#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3		// Use modern global access method and strict wave access.

/////////////////////////////////////
//////////CHANGE LOG/////////////////
///////////////////////////////////

//SLPA Igor8 ver ce20210406d.ipf
//	- [DispXPS]	- Add SLP_DXPS_Realtime_Compare(Compare_Flg) button to compare current realtime spectrum with another data wave.
//					- Change default setting for DXPS to generate BE wave automatically after raw data is loaded (as now we have hv from .txt file)
//SLPA Igor8 ver ce20210406b.ipf
//	- [DispXPS]	Realtime DXPS - add 'Send to DXPS' functionality (send the current spectrum to the main DXPS panel)

//SLPA Igor8 ver ce20210406b.ipf
//	- [DispXPS]	Bug fix 
//						- For buttonProcs and ListBoxProcs in DispXPS main panel - string SelScan=SLP_DXPS_ScanListW[SelRow][0] is outside of the string switch causing error when users start the DispXPS module. 
//						Move the line inside strSwitch
//						- The Realtime DispXPS function - background process monitor - change to the correct monitored folder.
//						- Various bug fixes on Realtime DispXPS

//SLPA Igor8 ver ce20210323a.ipf
//	- [DispXPS]	Added 'Realtime DXPS' function that users can use to monitor the on-going DispXPS scans

//SLPA Igor8 ver ce20210318a.ipf
//	- [LoadLEEM]		- Update ImageBrowse to ver.2.0 so that users can use a background process to monitor the image folder where UView save .dat images to.

//SLPA Igor8 ver ce20210317a.ipf
//	- [LoadLEEM]		- Bug fixes - Global variable names for image export were wrong.
//						- Image Export = users can now select .jpg for image export.

//SLPA Igor8 ver ce20210311a.ipf
//	- [DispXPS] Oversampling function added to DispXPS export module. The function allow users to re-sample the raw DXPS data
//					with their own specified energy step (which could be smaller than the scan step). This is possible due to the 
//					continuous spectrum on the dispersive line (i.e. the scan step depends on the pixel size along the dispersive line).

//SLPA Igor8 ver ce20210213a.ipf
//	- [ImgXPS] Bug fix - reverse axis for plotted images.

//SLPA Igor8 ver ce20210211b.ipf
//	- [ImgXPS] ButtonProc_IXPS_ExportZProf(ba) : ButtonControl 
//				Export button proc is now updated so that it doesn't overwrite the exported zProfl. 
//				Instead the new code use p and q pos to name the exported wave and also prompt user to enter new names if they are already used.

//SLPA Igor8 ver ce20210211a.ipf
//	- [UTIL] Add SLP_Util_FolderTotalSizeMBytes(FolderName,Print_Flg) and SLP_Util_FolderWaveSizeMBytes(FolderName,Print_Flg)
//		To display size of folders/subfolders in Igor Project. This should help users to see the big picture of large (e.g. many-GBytes projects)
//			- Add this function to the SLPA menu bar
//SLPA Igor8 ver ce20210208a.ipf
//	- [ARPES] 
//		- Bug fix - ButtonProc_ARPES(ba) - SmoothVol = use V_flag instead of V_Value
//		- Automatically use the screen position from the previous scan (assuming that PEEM camera position doesn't change during the beamtime)	

//SLPA Igor8 ver ce20210128a.ipf
//	- [ARPES] Some bug fixes

//SLPA Igor8 ver ce20210126a.ipf
//	- [ARPES] Major update: Clean up code and add more features
//				- Users can now adjust min/max int. with sliders.
//				- SetScale to K space with calibrated k scale (from OBJ working distance)
//				- Can now select hi-symmetry points and plot E-k map in high-symmetry directions.

//SLPA Igor8 ver ce20201230b.ipf
//	- [LoadLEEM] Add export options that allow users to include PvT graph with cursors. Users can specify the exported image's size.

//SLPA Igor8 ver ce20201230a.ipf
//	- [LoadLEEM] Change LoadImg Panel01 to Mode 9 so that users can select multiple files more easily.
//	- [LoadLEEM] Bug fix - Prevent users from clicking blank space in the image list.
//	- [NEXAFS] Change Load Batch panel into Mode 9 and use bitwise operations for selecting/loading data
//	- [DispXPS] Change Load Batch panel into Mode 9 and use bitwise operations for selecting/loading data

//SLPA Igor8 ver ce20201229b.ipf
//	- [LoadLEEM] Add Remove Image(s) button so that users can delete selected images from a DataSet. This should help to save some memory in large igor projects.

//SLPA Igor8 ver ce20201229a.ipf
//	- [LoadLEEM] Change image selection modes from 2 to 9 (multiple selection is enabled). Users can check or uncheck multiple images in a dataset.

//SLPA Igor8 ver ce20200930a.ipf
//	- [DXPS] Find the value of Photon Energy in .txt file when users load DXPS data

//SLPA Igor8 ver ce20200825a.ipf
//	- [DXPS] SLP_DXPS_LoadSingleScan - Now detects EELS scan (BIAS scan instead of STV scan)
//	- [UTIL] Set image scale module added - User can use the panel to set image wave scaling using value calibrated to PEEM's MCP screen (FOVs and k-space size in LEED).

//SLPA Igor8 ver ce20200819a.ipf
//	- [DispXPS] Add Load batch and improve automatic Disp. Line creation algorithm.
//		- Load Batch panel from DXPS is similar to that of NEXAFS
//		- As DXPS keep large data in computer memory, automatic disp. line creation and spectrum extraction is implemented.
//			The raw data volume is removed after spectrum extraction for each DXPS scan in the batch processing.
//		- Because the photon energy can't be read from either the raw data or the .txt file. Users will have to enter correct hv later after batch loading.
//		- [TODO] - How about having a prompt for photon energy when operator start a DXPS or IXPS scan?

//SLPA Igor8 ver ce20200811a.ipf
//	- [LoadLEEM] Flip image wave when load image from binary .dat file. This will make image data loaded this way similar to when
//		Igor loads image files (having the upper left cornor = (0,0)).
//	- [LoadLEEM] Bug fixes - SLP_LL_PlotSingleImg(), SLP_LoadFullSize() - Make the image plot similar to the display in UView (don't reverse y-axis).

//SLPA Igor8 ver ce20200723a.ipf
//	- [DXPS] Bug fixes - Create Panel = If (!stringmatch(SLP_DXPS_ScanListW[0][0],"")) //[BUG] this generates error. Modify the condition to ScanList size (23.07.2020)
//	- [NEXAFS] Add Up and Down button so that user can sort the data in ScanList

//SLPA Igor8 ver ce2020620a.ipf
//	- [NEXAFS] Add Correct and Merge module
//		- When signal is low in NEXAFS (e.g. very thin layer), it may help to do multiple scans, then combine 
//			and average the data to improve signal to noise ratio. There can be an energy drift during time the scans are made,
//			especially when the grating still keeps warming up. The energy drift can be up to almost -2 eV for the first scan
//			compared to the last scans after the temperatures of optical elements stabilize. The drift seems to be
//			exponential (dE(time) = -A*exp(time/tau)).
//		- Users can use the module to correct energy drift. There is a display for the drift vs. time and users can fit with exponential function.
//			Then user can merge the spectra together or create individual corrected scan volumes.
//			The results can be exported into Igor folder or extenal directory in the computer. 
//			Corrected Izero and average Izero waves can also be created. 
//
//	- [UTIL] Add zProfile Cursor module. Add a cursor hook to ImgVolW display to see z profile (spectrum) as user moves the cursor
//			The module also adds Bin and Frame number selection

//SLPA Igor8 ver ce20200219a.ipf
//	- [PCA] Principal Component Analysis (PCA) module added to SLPA
//		- For hyperspectral data (e.g. IXPS or NEXAFS) PCA helps to group pixels with similar spectral characteristers using statistical approach. 
//			The module projects spectrum from each pixel into principal components and then plot the results into gray-scale images.
//			Users must use thresholding to include pixels with high enough grey level and assign the pixel to the group.
//			Then users can overlay threshold images to create a color map that displays domains with similar character by color.
//		- The threshold image can also be use as a ROI mask for automatic peak fitting (i.e. in ImgXPS module). With the PCA ROI, it is easier
//			for users to guess the result and cope with non-isochromaticity of PEEM. From peak fitting, the peak position map can then be fitted with
//			the banana function for non-isochromaticity correction. 
//	- [UTIL] SLP_Util_CorrectVolume(VolW_FName,CorrW_FName) is added. This function can be used to correct the non-isochromaticity shifts
//			by providing the Correction wave that tells the energy shift at any position on the screen.
//	- [UTIL] SLP_Util_ExtractZProfile2(ImgVolW_FName,ZProfW_FName,Vol_x,Vol_y,Bin) is added. This is a ver. 2 that is more flexible with
//			the desitination wave name (users can change the output z-profile name instead of having the fixed "_zProfl" suffix.

//SLPA Igor8 ver ce20200113a.ipf
//	- [UTIL] add Panel_Util_ScanTimeCalc() panel to help calculate scan time (DXPS, IXPS, ARPES, LEEMIV..)

//SLPA Igor8 ver ce20200105a.ipf
//	- [NEXAFS] Add [AEYNEX] functionality to convert Auger-electron-yield (AEY) NEXAFS scans into AEYNEX2D and 1D spectrum.
//		- See DESCRIPTIONs in [SLP_AEYNEX_Init, SLP_AEYNEX_DetectDuplicateStep, SLP_AEYNEX_ConvertUX, Panel_NEX_AEYNEX, ButtonProc_AEYNEX
//		- SetVarProc_AEYNEX, PopMenuProc_AEYNEX, SLP_AEYNEX_Remove2DGlitch, SLP_AEYNEX_Convert3]
//	- [NEXAFS] SLP_NEX_FindDataRow - find and return data row from ScanName
//	- [UTIL] SLP_Util_EqualizeStep2D - interpolate and equalize step
//	- [MGFIT] SLP_MGFit_ProcData - shift and normalize pre/post edge graph already in the MGFit panel
//SLPA Igor8 ver ce20191216e.ipf
//	- [ImgXPS] - Add capabilities to export fitting results from imaging XPS data analysis into an image sequence.
//			In this way users who don't use Igor can use free softwares like ImageJ to load the sequence, then use the frame slider
//			to see different parts of IXPS data and the fitting results. [SLP_IXPS_FitExportVideoUX]
//	- [ImgXPS] - [SLP_IXPS_AreaSpecMapsDisplayUX] Add functions to calculate peak area and plot into image. This is a better representation of chemical state quantity
//			than using just peak height (int) in GLA fitting.
//	- [ImgXPS] - From the peak area, add a funtion to determin the dominating species (that with the largest peak area) and map the 
//			dominating species in every pixel. All spectra in the pixel with similar species are integrated together to get better statistics.
//	- [Util] - [SLP_UTIL_CreateColorTable] Create color table to be used for ROIs, graphs, and image. The color table can be completely randomized with option (1)
//			
//	- [Util] - [SLP_Util_CheckNameDialog] to be used throughout SLPA package. This is to prevent users from unintentionally overwrite the
//			waves when they export plot/images from SLPA into their working Igor folder (e.g. root).
//	- [Util] - [SLP_Util_LabelImage] a small code to put an image wave name on the image display.


//SLPA Igor8 ver ce20190625b.ipf
//	- [ImgXPS][LoadLEEM] Convert the text encoding into UTF-8 using ConvertTextEncoding
//			because, since Igor7, UTF-8 has been used instead of system encoding, 
//			and the text files created from LEEM2000 are encoded in ISO-8859-1 which is different from UTF-8. 
//			Now SLPA can read FOV (µ and °) correctly.

//SLPA ver ce/0190625b.ipf
//	- [ImgXPS] - LEEM cut-off extraction can now use Lower and Upper Limits

//SLPA ver ce20190620a.ipf
//	- [Util] Change Launcher behaviour
//		- Start next to the data browser instead of behind
//		- Remember the expansion.

//SLPA ver ce20190608c.ipf
//	- [Util]
//		- SLP_Util_LegendFromList(GraphName,TraceStringList) - Put user's strings in legen instead of trace names
//	- [DispXPS]
//		- Show the scan note in legend when plotting the result
//		- Bug fix - Stop scan loading procedure when users cancel file selection dialog.

//SLPA ver ce20190608b.ipf
//	- [DispXPS] 
//		- Can now move a scan in the ScanList up and down to rearrange.
//		- Panel for multiple scan selection
//		- Legend with Scan Note is added when use Export function

//SLPA ver ce20190607a.ipf
//	- [ImgXPS] Change from the last version - the main panel only allows one selection in ScanList.
//		Users may select multiple scans with a separate popup window
//	- [DispXPS] Bug fix - Initialize the PT in UTIL 

//SLPA ver ce20190601a.ipf
//	- [ImgXPS] 
//		- Can now move a scan up or down in the list with up and down buttons. 
//		- Can now choose multiple scans and select all of them by 'Select highlighted' button.
//		- Rescale button for ImgVolW display.

//SLPA ver ce20190531c.ipf
//	- [ImgXPS] New layout on ImgXPS

//SLPA ver ce20190531b.ipf
//	- [ImgXPS] Bug fixes - deleting data. Showing the image cursor at the center of the image.

//SLPA ver ce20190529a.ipf
//	- [NEXAFS] Check Background name and ask users to change the name if duplicated or illegal

//SLPA ver ce20190524a.ipf
//	- [UTIL] SLP_Util_Make3DVolFromFolder
//		- Combine multiple image waves into a volume wave. All images waves must have exactly the same size.

//SLPA ver ce20190515a.ipf
//	- [UTIL] Panel_UTIL_ROICreate and functions therein - New panel to help specify ROI using ImageThreshold on specific part of the source image.
//		- Can choose multiple are with the similar intensity - help to utilize more data from hyperspectral volumes. Greatly improve S/N ratio for NEXAFS
//		- For ImgXPS, ROI must also be used with iso-chromaticity correction. This is more tricky but hopefully will be implemented later on.

//SLPA ver ce20190511b.ipf
//	- [NEXAFS] SLP_NEX_NEXROI - For creating graph that use data from all pixel within set threshold values [TODO] 
//		- **Not integrated into the UX yet

//SLPA ver ce20190511a.ipf
//	- [ImgXPS] SLP_IXPS_ManCorrPresetInit() Initalize the preset value (need to calibrate later) ** [TODO]. 
//		- Some bug fixes on that the preset should be set back to "--" after the setVar is changed.

//SLPA ver ce20190509a.ipf
//	- [LoadLEEM] SLP_LoadLEEM_batch_V2 - Automatically change image wave name into IMG_xxxxxx if the name that users use is too long.

//SLPA ver ce20190503b.ipf
//	- [NEXAFS] Update SLP_NEX_CopynPlot to make use of ROI color and shading for the plot.

//SLPA ver ce20190503a.ipf
//	- [UTIL] New 'SLP_Util_SortMulti2DWaves' function to sort wave(s) by a single column
//	- [NEXAFS] Update SLP_NEX_RefreshBatchList function to add creation/modification date/time string for sorting.
//	- [NEXAFS] SLP_NEX_SortBatchList function to sort the batch loading by name, date, note or file location

//SLPA ver ce20190307a.ipf
//	- [UTIL] New 'SLP_Util_FindWaveFName' function to find all WaveFName's in a graph

//SLPA ver. ce20190220a.ipf
//	- [NEXAFS] Bug fix - NEX Export
//	- [ARPES] Improve ARPES function - Now also display the Energy level when move the Frame slider
//	- [ARPES] Bug fixes - Init function previously overwrites the Package_SLP:ARPES
//						- Other bugs..

//SLPA ver. ce20190217a.ipf
//	- [ARPES] (NEW) - Add ARPES function
//		- Load ARPES data into 3D volume display with slider control
//		- Can specify the center of the kx,ky plane and the kMax point
//		- From that, can create a new volume where slice with different k-plane angle are created
//		- Convert scale to binding energy (y) and k (x)
//		- Can change Color Table, min/max intensity, and cursor+line color in the panel
//		- Export to JPEG, TIFF, PDF or as a figure in Igor (with options)
//		- Delete scan

//SLPA ver. ce20190213b.ipf
//	- [NEXAFS] - Batch export added.

//SLPA ver. ce20190213a.ipf
//	- [NEXAFS] - Export to image/graph function. With Export Options.. to choose whether to include ROI and Note in the result, and the type of export (files or graph inside Igor)

//SLPA ver. ce20190212a.ipf
//	- [NEXAFS][MGFit] - Can export Processed NEXAFS scans into MGFit. ROI selections matter. 

//SLPA ver. ce20190211c.ipf
//	- [MGFit] - Can now copy (1) Background, (2) Fit param., and (3) Range for area under graph calculation from a previous (n-1) scan

//SLPA ver. ce20190211b.ipf
//	- [NEXAFS] - Add Load Batch function. Can now load many scan at a time and also automatically loading new scans.

//SLPA ver. ce20190107b.ipf
//	- [NEXAFS] - Show an image from the scan and all ROIs. The colors on the spectra (only on the 1st column) reflect the ROI no.
//	- [NEXAFS] - Some layout change (expanded to support the image and ROI display)

//SLPA ver. ce20190106b.ipf
//	- [NEXAFS] - Some bug fixes from 20190106a - Properly show another scan after one is deleted. Also show a new scan after loading.

//SLPA ver. ce20190106a.ipf
//	- [NEXAFS] - Check for legal and duplicate scan name
//	- [NEXAFS] - Shorten scan name (removed unnecessary zero/underscore)
//	- [NEXAFS] - now save data in Package_SLP folder.
//	- [NEXAFS] - Delete scan.. button.

//SLPA ver. ce20190103a.ipf
//	- [LoadLEEM] - Create and plot PvT when loading a new data set, using data from the loaded images.
//	- [LoadLEEM] - When users choose an image, the cursor will provide the location on the Temp. profile and Pos. map grid.
//	- [LoadLEEM] - Checkboxes for PvT display options

//SLPA ver. ce20190102a.ipf
//	- [LoadLEEM] - Do proper DataName check (now have to be both unique and legal)

//SLPA ver. ce20190101b.ipf
//	- [LoadLEEM] -  Also shows image parameters in the display on the LL panel.

//SLPA ver. ce20190101a.ipf
//	- [LoadLEEM] -  LoadLEEM can now add image parameters when export.
//	- [LoadLEEM] - Minor change of layout. Can now add note to image sets.

//SLPA ver. ce20181227a.ipf
//	- [DXPS] - Add Custom energy lines. Users can add labels at certain BEs with descriptions

//SLPA ver. ce20181225a.ipf
//	- [DXPS] - Add option to display Auger line from PT, the auger line can also be plotted if selected
//[NOTE] Auger line depends on the selected scan (hv and aWF settings of individual scan)

//SLPA ver. ce20181221d.ipf
//	- [DXPS] - Insert Tag to plotted wave.
//	- [DXPS] - Omit Elem. tags when KE is selected.

//SLPA ver. ce20181221c.ipf
//	- [DXPS] - Move analyzer work function by button so that the energy calibration is easier.

//SLPA ver. ce20181221b.ipf
//	- [DXPS] - 'Clear button added for Periodic Table. Clear all tags, and reset the button color to default.

//SLPA ver. ce20181221a.ipf
//	- [DXPS] - When loading the data, automatically copy the dispersive line from the previous scan. 
//				If there is no provious scan, it will attempt to auto detect the line using threshold/findparticle
//	- [DXPS] - Fix bugs when remove raw data (only removed if they exists)

//SLPA ver. ce20181220a.ipf
//	- [DXPS] - Add Periodic Table to the DXPS panel - Dev. in [DXPS_PeriodicTable_ce20181219a.ipf]
//		- Can now show (all) peaks from elements that are selected on the periodic table on the Merged Spectrum graph.
//		- Update the panel layout so that the Merged Spectrum is larger.

//SLPA ver. ce20181219a.ipf
//	- [DXPS] - Automatically detect the disp. line when loading new data
//	- [DXPS] - Update disp. factor to 0.0305 (for new camera)

//SLPA ver. ce20181218a.ipf
//	- [DXPS] - Initiailze EXPORT to select only "Graph Stack" and nothing else
//	- [DXPS] - Replace 'Fit..' button with 'Reset scale' button to make Autoscale Axes easier.
//	- [DXPS] - ShowInfo when select 'Peak assignments'

//SLPA ver. ce20181107b.ipf
//	- [NEXAFS] - Fix the bug where the NEXAFS data with variable steps are processed with loaded background data.

//SLPA ver. ce20181023a.ipf
//	- [DXPS] - Add option to export scans into .txt files (energy and intensity column)

// SLPA ver. ce20180927b.ipf
//	- [NEXAFS] - Add 'Equalize step' step in recipe. This will do interpolation (with interpolation2 function) to make the step equal. It can also be used to SetScale of the Proc wave (for Fitting).
//	- [NEXAFS] - Change the default recipe to normalize the data by Izero, then make preedge = 0 and postedge = 1.

// SLPA ver. ce20180927a.ipf
//	- [UTIL] - Add SLP_Util_EqualizeStep() to cope with new NEXAFS data with variable energy step 

// SLPA ver. ce20180719c.ipf
//	- [IXPS] - Update the fit ERF curve in 'Secondary yield cut-off' mode

// SLPA ver. ce20180719b.ipf
//	- [IXPS] - Bugfix - Remember the ImgVol cursor pos

// SLPA ver. ce20180719a.ipf
//	- [IXPS] - Memorise the CMap cursor

// SLPA ver. ce20180718a.ipf
//	- [IXPS] - Ask to offset z to reference value when user plots the corrected map (CMap)

// SLPA ver. ce20180714c.ipf
//	- [IXPS] - Add 'Export histogram" to export the histogram.

// SLPA ver. ce20180714b.ipf
//	- [IXPS] - Add 'Auto color' button to automatically adjust zMin/zMax of the selected Map

// SLPA ver. ce20180714a.ipf
//	- [IXPS] - Add 'Histogram..' button to change the histogram min/max/bin

// SLPA ver. ce20180712a.ipf
//	- [IXPS]
//		- Bux fixes - change how DisplaySelectedData and SelectImage work.
//			- Automatically find the zMin/zMax
//			- Histogram min/max/bin are found automatically from zMin/zMax. The values are kept independently from zMin/zMax

// SLPA ver. ce20180525c.ipf [MAJOR UPDATE]
//	- [IXPS] Add Manual Isochromaticity Correction (IXPS_ManCorr) from file IXPS_ManCorr ver ce20180525d.ipf
	//	- Display manual correction for selected map (UMap). Have Sliders and SetVars for map correction.
	//	- Auto fit possible
	//	- Load from and save to preset
	//	- Export and import preset files
	//	- Adjustable slider ranges (for rough/fine adjustment)
	//	- New Ref point where the UMap and CMap will keep the same value
	//	- Offset/Scaling/Rotation correction have been moved to ManCorr panel
	//	- Color scale range is imported from the main ImgXPS panel (From ParamW). It can be adjusted here and the new setting is updated back to the main ImgXPS panel.
	//	- Notes for describing presets
	//	- Tidy up the panel

//SLPA ver. ce20180505a.ipf
//	- [IXPS] - IXPS2 -Re-write the peak fitting part. 
//			- Can now fit arbitrary number of peaks (XPS only). 
//			- Now fitting can use different types of background (None, flat,slope, ERF, atan, Shirley and linear)
//			- After fitting, the program can also show individual components and BG used during the extraction.

//SLPA ver. ce20180418e.ipf
 //	- [IXPS] - Bug fix: Copy minX,maxX,minY,maxY when the ROI is adopted from another scan

//SLPA ver. ce20180418d.ipf
 //	- [IXPS] - Display dashed line to show where on the z-profile the frame is currently on

//SLPA ver. ce20180418c.ipf
 //	- [IXPS] - Now the loaded data and processed images are kept in DispXPS folder instead of root folder to prevent clusters.

 //SLPA ver. ce20180418b.ipf
 //	- [IXPS] - Bugfix: Auto color scale and the color slider limits.
 
 //SLPA ver. ce20180418a.ipf
 //	- [IXPS] - Bugfix: Find minX,maxX,minY,maxY when the ROI is manually drawn

 //SLPA ver. ce20180417c.ipf
 //	- [IXPS] - Check whether user enter FOV during the load scan.
 
 //SLPA ver. ce20180417b.ipf
 //	- [DXPS] - Remove dependencies of Cmbnd and CmbndBE waves before data deletion to prevent delete errors.
 

//SLPA ver. ce20180409b.ipf
//	- [UTIL] - Add OBJ vs STV panel in Utility Belt (find parameter for IXPS scans)
//	- [UTIL] - Modify colour scale adjust panel in Utility Belt (can now change color table 'ctab' and set/apply default setting.
//	- [UTIL] - Adjust z value for image wave (to offset and equalize BG for e.g. parameter map comparisons)

//SLPA ver. ce20180405a.ipf
//	- [DXPS] - Bugfixes - Select and enable all parameter input after loading new data.
//	- [DXPS] - Automatically generate result after 'Copy Dispersion from'
//	- [UTIL] - Bugfixes - prevent error when a non-graph window is active.

//SLPA ver. ce20180404b.ipf
//	- [IXPS] - Isochromaticity [SLP_IXPS_GenIsochrome]: Change from using 2D paraboloid to 'Rosenbrock's Banana Function' to better represent the isochromaticity of the PEEM's optics.

//SLPA ver. ce20180402b.ipf
//	- [UTIL] - Add Color scale adjust panel

//SLPA ver. ce20180402a.ipf
//	- [UTIL] - Add Launcher panel (under Util section)

//SLPA ver. ce20180319a.ipf
//	- [MGFit] - Add multi-GLA peak fitting program (MGFit modules)
	//Function
	//	- Slider 
	//	- BG subtraction
	//	- Peak select
	//	- Copy Guess values
	//	- Default constraint
	//	- use default constraint and edit
	//	- Peak library and import peak library from a .txt file
	//	- Colour changes /w hold or guess out of range
	//	- Save/Load guesses
	//	- Fit and show fit results
	//	- Display last fit result
	//	- BG adjust and record
	//	- Export fit results
	//	- Check for duplicated new data W name
	//		- Allow user to change data W name
	//	- Peak area report
	//	- Fine steps for guess coef. adjustment
	//	- Display 'Kn' for each parameter
	//	- Arbitrary constraints
	//	- Default constraint for all peaks
	//TODOs
	//	- Font too big for Window Igor - Need to increase the panel size

//SLPA ver. ce20180222a.ipf
// - [UTIL] Bug fix: SLP_Util_ShirleyGen to be able to create Shirley BG for both positive and negative dE.

//SLPA ver. ce20180221a.ipf
// - [DXPS] SLP_DXPS_Convert4PCA() - convert Map Volume Wave into a table to be used for PCA analysis software

//SLPA ver. ce20180219a.ipf
// - [UTIL] SLP_Util_Split2D() to split 2D wave (e.g. TRXPS scan) into multiple 1D waves
// - [UTIL] SLP_Util_NormalizeMultiWaves()

//SLPA ver. ce20180212a.ipf
// - [UTIL] add SLP_Util_ShirleyGen to generate Shirley BG and subtract the BG (for XPS)

//SLPA ver. ce20180201a.ipf
//	- [DXPS] Ask users for photon energy (hv) when loading the scan.

//SLPA ver. ce20180131b.ipf
//	- [DXPS] Bug fixes on the BE/STV swap for Merged spectrum after changing Disp. Factor or (x0,y0)
//	- [DXPS] Change default values

//SLPA ver. ce20180131a.ipf
//	- [DXPS] Bug fixes on the overwriting exported waves.

//SLPA ver. ce20180130b.ipf
//	- [DXPS] Initialize the selected dispersive line (vertical line in the middle)

//SLPA ver. ce20180130a.ipf
//	- [DXPS] Ask whether user wants to overwrite the wave when exporting the plot

//SLPA ver. ce20180116a.ipf
//	- [DXPS] Check whether the selected scan name is duplicated or not.

//SLPA ver. ce20171227a.ipf
//	- [DXPS] Bug fix - Newly loaded scan is selected after the load finish.

//SLPA ver. ce20171030a.ipf
//	- [DXPS] Bug fix - add the auto detection of STV start, STV step from .txt file in the DXPS scan.

//SLPA ver. ce20170920a.ipf
//	- [IXPS] Bug fix - Extract LEEM Cutoff - previously MapVol size is only 1 layer and only collect the first parameter. Corrected now.

//SLPA ver. ce20170906d.ipf
//	- [LL] Note field is now editable. Can make note for individual image

//SLPA ver. ce20170906c.ipf
//	- [Util] Ask user to find SLP_Auger_W.ibw or SLP_BE_W.ibw if they have not been loaded to the current Igor folder.

//SLPA ver. ce20170906b.ipf
//	- [DXPS] Add Auger data to peak assignment
//	- [IXPS] Add Auger data to peak assignment

//SLPA ver. ce20170906a.ipf
//	- [LL] Bug fix - Display preview image once the 'Preview' checkbox is clicked [ListBoxProx_LL_FileList]

//SLPA ver. ce20170904a.ipf
//	- [DXPS] Bug fix - Peak assignment hook function. 

//SLPA ver. ce20170816b.ipf
//	- [IXPS] Draw ROI manually instead of using auto- screen mask creation

//SLPA ver. ce20170816a.ipf
//	- [DXPS] SLP_DXPS_RestoreRawData - If the raw data has been moved, ask user to browse for it.

//SLPA ver. ce20170815b.ipf
//	- [DXPS] Peak assignment function.

//SLPA ver. ce20170815a.ipf
//	- [DXPS] BE/KE display for the combined spectrum. Export to BE or KE. Prompt for analyzer's WF if no input.

//SLPA ver. ce20170728a.ipf
//	- [IXPS] Fix small bugs on peak assignment/BE display function (initialize new scans)
//	- [IXPS] Warn when users try to use existing volume names (incl. names used by other SLP functions) during Load Scan..

//SLPA ver. ce20170713a.ipf
//	- [IXPS] Peak assignment (using BE table)

//SLPA ver. ce20170707c.ipf
//	- [IXPS] Export and plot z-profile (both KE and BE)

//SLPA ver. ce20170707a.ipf
//	- [IXPS] Save z-profile cursor positions for each scan
//	- [IXPS] Able to switch KE<->BE scale

//SLPA ver. ce20170707a.ipf
//	- [IXPS] Bug fix - Delete all scans = ok (previously didn't actually delete raw data..)

//SLPA ver. ce20170706c.ipf
//	- [IXPS] Automatically detect STV start, STV step when loading IXPS,DXPS,LEEDIV,LEEMIV

//SLPA ver. ce20170706b.ipf
//	- [DLA] Bug fix - Don't display anything if there is no image loaded yet
//	- [UTIL] LoadMultImg2Vol can now load either .tif and .TIFF for 
//	- [IXPS] Bug fix - Error when 'See z-profile' is checked when loading new volume.

//SLPA ver. ce20170706a.ipf
//	- [DLA] Include Diffusion Limit Aggregation analysis (SLP_DLA_ce20170504d.ipf)

//SLPA ver. ce20170629a.ipf
//	- [IXPS] Can use cursor to see different z-profile in different area. First use of 'hook' function in Igor.

//SLPA ver. ce20170627a.ipf
//	- [IXPS] Add 'LEEM cut-off' mapping (for rel. WF measurement with LEEM).

//SLPA ver. ce20170607a.ipf
//	- [IXPS] Can now adjust Isochromaticity mathematical function (displayed in SetVar controls)

//SLPA ver. ce20170606d.ipf
//	- [IXPS] Use Inversed GLA instead (for KE scale)

//SLPA ver. ce20170606c.ipf
//	- [IXPS] Add 4GLAs fit function
//	- [IXPS] Small bug fix on display selected param. map (applied auto-intensity)

//SLPA ver. ce20170606b.ipf
//	- [IXPS] Add 3GLAs fit function

//SLPA ver. ce20170606a.ipf
//	- [IXPS] adjust LLim and ULim after loading
//	- [IXPS] Bug fixes for the Display/selected image vs. histogram and auto intensity adjust

//SLPA ver. ce20170430b.ipf
//	- [IXPS] Change to green color

//SLPA ver. ce20170430a.ipf
//	- [IXPS] Copy fit coef. from another scan

//SLPA ver. ce20170429b.ipf
//	- [IXPS] Update fit mask LLim and ULim variable with scan selection
//	- [IXPS] Copy screen mask from another scan (with the same bin)

//SLPA ver. ce20170429a.ipf
//	- [IXPS] 1GLA fit mode added
//	- [IXPS] Hold functionality for keeping fit coef. constant

//SLPA ver. ce20170424a.ipf
//	- [IXPS] Improve the auto range funtionality - use median then average MatrixFilter (avg works quite well with NaN)

//SLPA ver. ce20170424a.ipf
//	- [IXPS] 
//		- Correc the Image selection function - should work properly now
//		- Do a 'low pass filter' with MatrixFilter in the 'median' mode to remove speckles. The histogram looks much better this way.
//		- Automatically set the Color min/max using the LPF'ed Map
//		- Update the color min/max slider and color min/max update the ParamDisplayW
//		- Clean up the DisplaySel function (call the SelectImage function instead of doing it by itself)

//SLPA ver. ce20170420a.ipf
//	- [NEX] Load scans.. button is now load only one scan at a time. It also checks and corrects the scan name automatically.
//	- [IXPS] Auto create correction (using 2d parabolic correction function)

//SLPA
//	- Load_LEEMDAT_ce20170226a.ipf
//	- SLP_NEXAFS_ce20170104a.ipf
//	- DispXPS_Panel_ce20170302f.ipf
//	- ImgXPS_Panel_ce20170321e.ipf
//	- SLP_Util_ce20170226a.ipf

//ver. ce20170104a
//	- Add SLP_Load_oldLEEM_Img() - Load old .DAT file from Elmitec LEEM (before 2014)
	
//ver. ce20161216a
// - Add image creation date/time in the param list

//ver. ce20161215c
// - Add Image notes
// - Some cosmetic changes
// - Bug fix on deleting many DataSet

//ver. ce20161215b
// - Delete dataset is available. It warns when some images are in used. Dataset won't be deleted in that case.

//ver. ce20161214a
// - Cross-hair in the Find screen dialog (only if the x-y scale is not set). Values of new x_center and y_center can be manually changed.
// - Change Plot single image button to Plot fullsize image (required that the data file is accessible). Plot single image still works with double clicking the image name in the list

//ver. ce20161210a
// - Stitch - ROI can be modified. Mask creation window also shows selected image behind the mask.

//ver. ce20161209a
// - Add functions to scale images, find screen position, and image stitching
// - Plot the displayed image w/ description legend
// - Export selected images to TIFF files in selected folder w/ a .csv file containing image details
	//[from Stitch .ipf  Ver. ce20161128a.ipf
		// - Work with LoadLEEM .ipf
		// - Set scale for selected images in the dataset. Scale can be pixel, relative or absolute (offset with Mitutoyo X,Y reading).

//Ver. ce20161207a.ipf
// - Stitching almost works. Need algorithm for some FOV adjustment (e.g. 75um FOV is not really

//ver. ce20161119a
// - Load images (.DAT) in batch. Read and store important LEEM/PEEM parameters from the header of the image file

//ver.ce20161123a
// - User interface
// - Load sets of image and automatically save the image set. 

//ver.ce20161124a
// - Bug fixed - solve the problem when the some image number is missing. Change the search algorithm in the SLP_LL_setup function (now ver.2)
// - Record no. of images in the 4th column of DatasetListW
// - Cosmetic change to the image plot display

//ver. ce20161126a
// - New dataset selection and display automatically after loading
// - Default resize option is 0.25 and is kept afterward
// - Bug fixed - parameter display update
// - Dataset name suggestion using folder name

//ver. ce20161127a
// - Warn when users use duplicated dataset name

//ver. ce20161127b
// - Remove the 128 dataset limit. ImgSetListW size is increased with added datasets
// - use 'row=" in the ListBox selection so that the selection is always visible when switching between datasets
// - Prevent users from clicking outside the range in Image and DataSet listboxes

//ver. ce20161127c
// - Image/dataset selection with SelWave
// - Select all/select none buttons for image list

//ver. ce20161127d
// - Image ctab (colour/first colour/last colour)is retained for the next image selection. It is saved for the next time the program is run

//ver. ce20170226a
// - Add new image load panel. The multiple image loading is easier and more efficient.
// - Bug fix on the deleting datasets (the previous version doesn't use /TXOP=6 in the FindValue so the deletion had been wrong



/////////////////////////////////////
/////////////ARCHIVE/////////////////
/////////////////////////////////////

//CODE: DispXPSPanel
//Ver. ce20170301a
//	- First working version
//		- Data loaded and saved in separated folders (Raw data in one folder)
//		- Adjust threshold and minimum disp. size (in pixels) to find a dispersive line automatically
//		- Extract XPS spectra from different position in the disp. line (several param. can be selected in the panel)
//		- Disp. factor and energy position can be calibrated in the panel 
//Ver. ce20170301b
//	- Can now choose Disp. line and subsequent P. lines gen. param. from another scan (helps when measuring low S/N scans, or Ef)
//	- Can correct the first frame which sometimes has unusually high intensity (by copying the second frame onto it - losing 1 data point).
//Ver. ce20170301c
//	- Can remove the raw data to reduce the project file size.
//	- Small code clean-up
//Ver. ce20170301d
//	- Can restore raw data for re-processing
//Ver. ce20170302a
//	- Small bug fixes (control toggling when scan has/has no raw data
//	- Select all/select none buttons
//Ver. ce20170302b
//	-  Export and plot results (combined spectrum only)
//Ver. ce20170302c
//	- Add Scan Note (all the parameters used in the data extraction) to the exported wave
//Ver. ce20170302d
//	- Bug fixed: Error when trying to adjust Disp. Factor/x0/y0 w/o raw data (removed a wave refrence to the raw data)
//	- Bug fixed: Copy dispersive line from.. button -> Error conditioning with V_Flag (Continue -> V_Flag=0)
//	- Bug fixed: NLines is not stored in the ScanListW! -> Fixed
//	- Check ScanName and make suggestions for users to conform to Standard Wave Name. [CODE: SLP_Util_WNameCheck], [CODE: SLP_Util_WNameSuggest]
//Ver. ce20170302e
//	- Manual edit of the disp. line
//Ver. ce20170302f
//	- Cosmetic change - panel colour = blue

//[POS]IXPS Begin
//CODE: ImgXPSPanel
//
//	Ver.ce20170310c
//	- Almost working - Ver. 0.7
//	- Can Load and display image volume w/ slider
//	- Automatic screen mask creation
//	- Loop data fitting for (binned) each pixel
//	- Extraction progress (in %)
//	- Load correction waves from DataBrowser window
//	- Correction fine-adjustment (x,y,magnitude)

//	Ver.ce20170311a
//	- ListBoxProc for DisplayListW
//	- ListBoxProc for XPS param ListW

//	Ver.ce20170311b
//	- Auto color scale/int. for the image volume/maps
//	- Some fix on using the ScanList ListBox
//		- properly show ImgVol or IntgImg depending on whether there is raw data stored in the project

//	Ver.ce20170311d
//	- Can now use slider to adjust color scale
//	- Radio button to select which Image to adjust the color scale
//	- Use STRUCT of the checkbox control.

//	Ver.ce20170312a
//	- Export/display maps
//	- Still with some bugs
//	- Can still extract only the cutoff (w/ ERF fit) for WF measurements

//	Ver. ce20170312b
//	- First working version - Ver. 1.0
//	- Many bug fixes..

//	Ver. ce20170317a
//	- Small bug fix (automatically select newly loaded Scans, display fitted curve)

//	Ver. ce20170321b
//	- Can now select which fitting mode to use (2 modes - Secondary Yield Cut-off for WF measurements, and 2GLAs for isochromaticity map)
//	- 'Fast Extraction' mode (much faster with /N=1 in FuncFit)

// Ver. ce20170321c
//	- Adjust Threshold for finding screen

//	Ver. ce20170321d
//	- Clean up the windows. Move graph and control positions.

//	Ver. ce20170321e
//	- Init check. Bug fixes (not 100% yet)

//Igor procedure to assist BL3.2Ub operation and data analyses

//ver. ce20161031a
// - Can load, draw line, change line profile width, and plot profile and intensity vs. time plot
// - Still very buggy

//ver. ce20161107b
// - Initialize program (creating Package waves, global variables, etc.)
// - Plotting the result
// - Label and formatting graph
// - Stored and display previous image series
// - Updating line profiles with line profile width
// - Remove old line profile (bottom graph)

//ver. ce20161111a
// - Keep raw images and line profiles in separated folders

//ver. ce20170226a
//	- Change name to SLP_XPS
//	- Merge SLP_WF_ce20170208a.ipf (WF mapping)
//	- Merge SLP_CreateDispLines_ce20170214a.ipf (Automatic dispersion line finding and multiple-point data collection for XPS)

//Current ver. ce20161114a
// Todos
//	- New DataSet system (from SLP_LoadLEEM)
// - Filter for file loading (e.g. *.TIF)
// - Option to load .DAT and extract data
// - Auto calculation of dispersion (eV/pixel)
// - Show line profile width
// - Delete raw data (to save disk space)
// - Clean up the code

/////////////////////////////////////
/////////////TODOs/////////////////
/////////////////////////////////////

// [LEED-IV]
//	- Extract IV curves from LEEM's LEED
//	[UTIL]
//	- Sine Sound wave should be put inside UTIL folder
//	- W_StatsQuantiles should be put inside UTIL folder
//	- Project creation
//	- Auto detect/index new data
//	- Auto update??
//	- Report creation assist - Report panel
//	[LoadLEEM]
//	+ Functionality
	// - ***Make notes for individual images [to be used for Report Making feature]
	// - **Report making
	// - Record time when images have been captured
//	+ Bug fixes
	// - Editable note column for images and dataset
	// - Load TIFF&other file types as well
	// - Should be able to distinguish the LEED/Disp. mode and prevent program from interrupting the processes
	// - Error when all datasets are deleted
	// - FOV name table <-> FOV variable
//	[NEXAFS]
//	- Option to load existing wave instead of from .txt file (e.g. z-profile waves extracted from [ImgXPS]
//	- Fit and Global fit
//	- Report creation - export to LaTeX
//	- Rescale selected graph button
//	- Clear all graph selections button
//	- Memorise recipe parameter values
//	[ImgXPS]
//	- Put data in 'ImgXPS' folder
//	- LPF image should be put in ImgXPS folder
//	- Warn when user don't enter FOV 
//	- Volume data pre-processing - [z-wave] Normalize, subtraction, and [xy wave] Isochromaticity correction, brightness correction before extraction
//	+ Additional features	*
//		- Th. adj. for screen mask creation
//			- Error report when scrn. msk. creation is not successful
//	- Coef. real-time display for curve fitting
//	- Est. time for extraction
//	- Quick ext. mode (no fit display)
//	- Error marking for bad fit.
//	[DispXPS]
//	- Export
//		- Show the notes in the label instead of wavename
//		- Export to GLAFit
//	- Use 'absolute' scale (in ref. to the MCP screen size).

//	Bug fixes
//	- Axis label disappears for both indv. and cmbn. plots
//	- Disp. and P. lines display is not correct sometimes.
//	[DLA]
//	- Bug fixes - duplicate Voronoi cell
//	- Manually movable/editable/addable island centers

//MAIN MODULES//
//MENU BAR
Menu "SLPA"
	"Launcher..",Panel_Util_Launcher()
	
	"Load LEEM images..",SLP_LL_CreatePanel01()
	"Load NEXAFS scans..",SLP_NEX_CreatePanel()
	"Imaging XPS..",SLP_IXPS_CreatePanel1()
	"Dispersive XPS..",SLP_DXPS_CreatePanel1()
	"DLA analysis..",SLP_DLA_CreatePanel01()
	"Multi-GLAs Fit..",SLP_MGFit_CreatePanel()
	"ARPES..",SLP_ARPES_CreatePanel()
	"PCA..",Panel_PCA_Panel01() 
	Submenu "Util"
		//"Find ERF cutoff",
		"Make rainbow",SLP_Util_MakeRainbow()
		"Make red gradient",SLP_Util_MakeRedGradient("")
		"Change color scale..",SLP_Util_PanelColorScale()
		"Find OBJ vs STV..",SLP_Util_PanelObjStv()
		//"Offset intensity",
		"z profile display",SLP_Util_zProfile_ApplyCursorHook()
		"ROI from threshold..",Panel_UTIL_ROICreate()
		"Calculate scan time..",Panel_Util_ScanTimeCalc()
		"Set image scale..",Panel_SetImageScale()
		"Folder sizes",SLP_Util_FolderTotalSizeMBytes("root",1);SLP_Util_FolderTotalSizeMBytes("root:Package_SLP",1);dowindow /H
	End
End

//LAUNCHER//
Function SLP_Util_CreateLauncher() : Panel
	//CREATED: 04.2018
	//MODIFIED: 20.06.2020
	//DESCRIPTIONS: Create SLPA Launcher Panel with Utiliy Belt which contains small tools for SLPA
	
	If (!DatafolderExists("root:Package_SLP:Util"))
		SLP_Util_Init()
	EndIf
	
	Dowindow /K SLP_Launcher
	
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(100,49,852,417) /N=SLP_Launcher
	ModifyPanel fixedSize=1
	SetDrawLayer UserBack
	SetDrawEnv fsize= 18
	DrawText 14,30,"SLRI LEEM PEEM Analysis"
	SetDrawEnv fsize= 14
	DrawText 12,52,"Launcher"
	SetDrawEnv fsize= 30
	DrawText 659,361,"SLPA"
	SetDrawEnv fillpat= 0
	DrawRect 230,32,739,359
	Button button_LEEMImage,pos={12,57},size={102,64},proc=ButtonProc_Util_Launch,title="LEEM image"
	Button button_Done,pos={11,339},size={50,20},title="done",proc=ButtonProc_Util_Launch
	Button button_ImgXPS,pos={120,57},size={102,64},proc=ButtonProc_Util_Launch,title="Imaging XPS",fColor=(26205,52428,1)
	Button button_DispXPS,pos={12,125},size={102,64},proc=ButtonProc_Util_Launch,title="Dispersive XPS",fColor=(0,43690,65535)
	Button button_NEX,pos={120,126},size={102,64},proc=ButtonProc_Util_Launch,title="NEXAFS"
	Button button_DLA,pos={13,192},size={102,64},proc=ButtonProc_Util_Launch,title="DLA analysis"
	Button button_MGFit,pos={121,192},size={102,64},proc=ButtonProc_Util_Launch,title="Multi GLAs fit"
	Button button_PCA,pos={12.00,262.00},size={102.00,64.00},proc=ButtonProc_Util_Launch,title="PCA",fColor=(44253,29492,58982)

	Button button_Util,pos={121,262},size={102,64},title="Utility",proc=ButtonProc_Util_Launch
	
	TabControl tab1,pos={238,4},size={430,21},tabLabel(0)="All"
	TabControl tab1,tabLabel(1)="Color scale",tabLabel(2)="Report",tabLabel(3)="Log"
	TabControl tab1,tabLabel(4)="XPS tools",value= 0,disable=2
	Button button_FindCutoff,pos={248,44},size={100,20},proc=ButtonProc_Util_FindCutOff,title="Find ERF cutoff",fSize=10
	Button button_MakeRainbow,pos={247,68},size={100,20},proc=ButtonProc_Util_Launch_Sub1,title="Make rainbow",fSize=10
	Button button_MakeRedgradient,pos={247,94},size={100,20},proc=ButtonProc_Util_Launch_Sub1,title="Make red gradient",fSize=10
	Button button_ColorScale,pos={247,124},size={100,20},proc=ButtonProc_Util_Launch_Sub1,title="Change color scale",fSize=10
	Button button_ObjStv,pos={247,164},size={100,20},proc=ButtonProc_Util_Launch_Sub1,title="Find OBJ vs STV",fSize=10
  	Button button_OffsetZ,pos={247,197},size={100,20},proc=ButtonProc_Util_Launch_Sub1,title="Offset intensity",fSize=10
	Button button_zProflCursor,pos={249.00,236.00},size={100.00,20.00},proc=ButtonProc_Util_Launch_Sub1,title="z profile display",fSize=10
	Button button_ROIThreshold,pos={249.00,269.00},size={100.00,20.00},proc=ButtonProc_Util_Launch_Sub1,title="ROI from threshold",fSize=10
	Button button_ScanTimeCalc,pos={250.00,296.00},size={100.00,20.00},proc=ButtonProc_Util_Launch_Sub1,title="Calculate scan time",fSize=10,fColor=(44253,29492,58982)


	SetDrawEnv fsize=10;DrawText 351,61,"Find location of photoemission cut-off when doing workfunction measurement"
	SetDrawEnv fsize=10;DrawText 351,90,"Change trace colors in multi-trace graph to rainbow"
	SetDrawEnv fsize=10;DrawText 351,120,"Change trace colors in multi-trace graph to red with different shades"
	SetDrawEnv fsize=10;DrawText 351,150,"For 2D image plot. Can change the scale automatically based on median value"
	SetDrawEnv fsize=10;DrawText 355,180,"Find relationship between Objective lens and Start Voltage"
	SetDrawEnv fsize=10;DrawText 355,212,"Offset intensity level of background to equalize and compare 2D maps"
	SetDrawEnv fsize=10;DrawText 355,252,"Display z profile of 3D image volume display and add controls"
	SetDrawEnv fsize=10;DrawText 355,285,"Create ROIs by adjust image threshold"
	SetDrawEnv fsize=10;DrawText 355,312,"Calculate scan time for DispXPS and ImgXPS in PEEM"

	NVAR Launcher_expand=root:Package_SLP:Util:Launcher_expand
	Launcher_expand=1

End

Function SLP_Util_CreateLauncher_small() : Panel
	//CREATED: 04.2018
	//MODIFIED: 20.06.2020
	//DESCRIPTIONS:
	
	If (!DatafolderExists("root:Package_SLP:Util"))
		SLP_Util_Init()
	EndIf

	PauseUpdate; Silent 1		// building window...
	Dowindow /K SLP_Launcher
	Variable LauncherPosX=400
	Variable LauncherPosY=50
	NewPanel /W=(LauncherPosX,LauncherPosY,LauncherPosX+230,LauncherPosY+370) /N=SLP_Launcher
	ModifyPanel fixedSize=1
	SetDrawLayer UserBack
	SetDrawEnv fsize= 18
	DrawText 14,30,"SLRI LEEM PEEM Analysis"
	SetDrawEnv fsize= 14
	DrawText 12,52,"Launcher"
	SetDrawEnv fsize= 30
	DrawText 146,367,"SLPA"
	Button button_LEEMImage,pos={12,57},size={102,64},proc=ButtonProc_Util_Launch,title="LEEM image"
	Button button_Done,pos={11,339},size={50,20},title="done",proc=ButtonProc_Util_Launch
	Button button_ImgXPS,pos={120,57},size={102,64},proc=ButtonProc_Util_Launch,title="Imaging XPS"
	Button button_ImgXPS,fColor=(26205,52428,1)
	Button button_DispXPS,pos={12,125},size={102,64},proc=ButtonProc_Util_Launch,title="Dispersive XPS"
	Button button_DispXPS,fColor=(0,43690,65535)
	Button button_NEX,pos={120,126},size={102,64},proc=ButtonProc_Util_Launch,title="NEXAFS"
	Button button_DLA,pos={13,192},size={102,64},proc=ButtonProc_Util_Launch,title="DLA analysis"
	Button button_MGFit,pos={121,192},size={102,64},proc=ButtonProc_Util_Launch,title="Multi GLAs fit"
	Button button_PCA,pos={12.00,262.00},size={102.00,64.00},proc=ButtonProc_Util_Launch,title="PCA",fColor=(44253,29492,58982)
	
	Button button_Util,pos={121,262},size={102,64},title="Utility",proc=ButtonProc_Util_Launch
	
	NVAR Launcher_expand=root:Package_SLP:Util:Launcher_expand
	Launcher_expand=0
End

Function ButtonProc_Util_Launch(ba) : ButtonControl
	//CREATED: 04.2018
	//MODIFIED: 20.06.2020
	//DESCRIPTIONS: Buton proc for SLPA Launcher (main buttons)
	
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch (ba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "button_LEEMImage":
					SLP_LL_CreatePanel01()
					break
				case "button_ImgXPS":
					SLP_IXPS_CreatePanel1()
					break
				case "button_DispXPS":
					SLP_DXPS_CreatePanel1()
					break
				case "button_NEX":
					SLP_NEX_CreatePanel()
					break
				case "button_DLA":
					SLP_DLA_CreatePanel01()
					break
				case "button_MGFit":
					SLP_MGFit_CreatePanel()
					break
				case "Button_PCA":
					Panel_PCA_Panel01()
					Break
				case "button_Util":
					NVAR Launcher_expand=root:Package_SLP:Util:Launcher_expand
					If (Launcher_expand)
						SLP_Util_CreateLauncher_small()
					Else
						SLP_Util_CreateLauncher()
					EndIf
					break
				
				case "button_Done":
					DoWindow/K SLP_Launcher
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_Util_Launch_Sub1(ba) : ButtonControl
	//CREATED: 04.2018
	//MODIFIED: 20.06.2020
	//DESCRIPTIONS: Buton proc for SLPA Launcher (Sub Panel no. 1 in Utility Belt)
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch (ba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "button_MakeRainbow":
					SLP_Util_MakeRainbow()
					break
				case "button_MakeRedGradient":
					SLP_Util_MakeRedGradient("")
					break
				case "button_ColorScale":
					SLP_Util_PanelColorScale()
					break
				case "button_ObjStv":
					SLP_Util_PanelObjStv()
					break
				case "button_OffsetZ":
					If (Stringmatch(CsrInfo(A),""))//If cursor A is not on graph
						DoAlert 0,"Put Cursor A on the background area in the image"
					Else
						variable Current_Z=zcsr(A)
						NVAR NewZ=root:Package_SLP:Util:NewZ
						Variable NewZ_Prompt=NewZ
						Prompt NewZ_Prompt,"New Z value"
						DoPrompt "Enter parameter",NewZ_Prompt
						NewZ=NewZ_Prompt
						IF (V_Flag==0) //Press Continue
							String ImageName=Stringfromlist(0,ImageNameList("",";"))
							Wave ImgW=ImageNameToWaveRef("",ImageName)
							ImgW-=(Current_Z-NewZ)
							Print "======================="
							Print ImageName+"'s Z has been offset"
							Print "Original Z value = "+num2str(Current_Z)+", new Z value = "+num2str(NewZ)
							Print "Cursor x: "+num2str(hcsr(A))+" ["+num2str(pcsr(A))+"]"
							Print "Cursor y: "+num2str(vcsr(A))+" ["+num2str(qcsr(A))+"]"
							Print "======================="
						EndIF
					EndIf
					break
				case "button_zProflCursor":
					SLP_Util_zProfile_ApplyCursorHook()
					break
				case "button_ROIThreshold":
					Panel_UTIL_ROICreate()
					break
				case "button_ScanTimeClac":
					Panel_Util_ScanTimeCalc()
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


//Ver. ce20210121a = before changing x,y,theta
//Ver. ce20210121b = start changing x,y,theta
//Ver. ce20210121c = start setScaling RAW ARPES volume (k)
//Ver. ce20210122a = SetScaled RAW ARPES volume 
//Ver. ce20210122b = Defining high-symmetry (Gamma, K, M) points (from cursors) [ - next = from LEED ]
//Ver. ce20210125a = Plotting high-symmetry points
//Ver. ce20210125c = Exporting high-symmetry points
//Ver. ce20210126b = Choose KE or BE as vertical axis
//Ver. ce20210126c = Bug fix on the hi-sym display + Panel cleanup.



Function SLP_ARPES_CreatePanel() : Panel
	//Modified: 26.01.2021 - Major update to add Hi-symmetry direction E-k plot
	
	PauseUpdate; Silent 1		// building window...
	String ARPES_Panel_Name="SLP_ARPES_Panel_01"
	
	If (!DataFolderExists("root:Package_SLP:ARPES"))
		SLP_ARPES_Init()
	EndIf
	If (!DataFolderExists("root:Package_SLP:Util"))
		SLP_Util_Init()
	EndIf
	
	NVAR ScanSel=root:Package_SLP:ARPES:ScanSel
	
	If (!StringMatch(WinList("SLP_ARPES_Panel_01",":","WIN:64"),""))//Check whether SLP_ARPES_Panel_01 is already open
		Dowindow /K $ARPES_Panel_Name
	EndIf
	NewPanel /N=$ARPES_Panel_Name /W=(46,54,920,690)
	ModifyPanel cbRGB=(56797,56797,56797)
	
	SetDrawLayer /W=$ARPES_Panel_Name UserBack
	
	//TITLE//
	SetDrawEnv /W=$ARPES_Panel_Name linethick= 0,rounding= 15,fillfgc= (62194,56797,22616)
	DrawRRect /W=$ARPES_Panel_Name 5,5,175,34
	SetDrawEnv /W=$ARPES_Panel_Name linethick= 0,linefgc= (65535,65535,65535)
	DrawRRect /W=$ARPES_Panel_Name 8,8,44,31
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 16,fstyle= 1
	DrawText /W=$ARPES_Panel_Name 11,30,"SLP ARPES analysis"
	
	//BG//
	SetDrawEnv /W=$ARPES_Panel_Name linethick= 0,linefgc= (61240,55487,18224)
	DrawRRect /W=$ARPES_Panel_Name 8,326,330,634
	SetDrawEnv /W=$ARPES_Panel_Name linethick= 0,linefgc= (61240,55487,18224)
	DrawRRect /W=$ARPES_Panel_Name 542,332,864,613
	
	//////////////
	//ARPES - RAW
	//////////////
	Slider Slider_ARPESVolFrame,pos={9.00,37},size={227.00,16.00},vert= 0,proc=SliderProc_ARPES
	Slider Slider_ARPESVolFrame,limits={0,125,1},value= 79,side=0,ticks= 0

	SetVariable setvar_FrameNo,pos={178.00,15.00},size={63.00,14.00},proc=SetVarProc_ARPES,title="Frame:"
	SetVariable setvar_FrameNo,valueBackColor=(56797,56797,56797)
	
	SetWindow kwTopWin,hook(Find_kxky)=SLP_ARPES_CursorHook
	Display /N=RAW_ARPES/W=(11,49,235,270)/HOST=$ARPES_Panel_Name
	
	Button Button_ResetZoom,pos={10.00,273.00},size={110.00,16.00},proc=ButtonProc_ARPES,title="Reset zoom"
	Button Button_ResetZoom,fSize=10
	Button Button_CreateRotARPES,pos={124.00,273.00},size={140.00,16.00},proc=ButtonProc_ARPES,title="Create rotating ARPES"
	Button Button_CreateRotARPES,fSize=10,fColor=(1,16019,65535)
	
	//INTENSITY and COLORTABLE
	Slider Slider_MinInt,pos={252.00,12.00},size={164.00,40.00},vert= 0,proc=SliderProc_ARPES
	Slider Slider_MinInt,fSize=7
	Slider Slider_MinInt,limits={1000,3000,1},variable= root:Package_SLP:ARPES:MinInt,ticks= 10
	Slider Slider_MaxInt,pos={252.00,43.00},size={164.00,40.00},vert= 0,proc=SliderProc_ARPES
	Slider Slider_MaxInt,fSize=7
	Slider Slider_MaxInt,limits={1000,3000,1},variable= root:Package_SLP:ARPES:MaxInt,vert= 0,ticks= 10
	
	SetVariable setvar_MinInt,pos={425.00,14.00},size={103.00,14.00},proc=SetVarProc_ARPES,title="Min intensity"
	SetVariable setvar_MinInt,limits={-inf,inf,5},value= root:Package_SLP:ARPES:MinInt
	SetVariable setvar_MaxInt,pos={425.00,42.00},size={107.00,14.00},proc=SetVarProc_ARPES,title="Max intensity"
	SetVariable setvar_MaxInt,limits={-inf,inf,5},value= root:Package_SLP:ARPES:MaxInt
	
	Button Button_SliderLimit,pos={428.00,61.00},size={90.00,16.00},proc=ButtonProc_ARPES,title="Modify sliders"
	Button Button_SliderLimit,fSize=10
	
	PopupMenu popup_ColorTable01,pos={256.00,88.00},size={280.00,23.00},bodyWidth=280,proc=PopMenuProc_ARPES
	PopupMenu popup_ColorTable01,mode=8,value= #"\"*COLORTABLEPOP*\""
	
	//SMOOTHING and RESTORE ARPES DATA
	Button Button_SmoothVol,pos={252.00,114.00},size={110.00,16.00},proc=ButtonProc_ARPES,title="Smooth (median).."
	Button Button_SmoothVol,fSize=10
	Button Button_RestoreRawData,pos={370.00,114.00},size={110.00,16.00},proc=ButtonProc_ARPES,title="Restore raw data"
	Button Button_RestoreRawData,fSize=10
	
	//k-SPACE RESCALE
	SetVariable setvar_OBJ,pos={254.00,145.00},size={150.00,14.00},proc=SetVarProc_ARPES,title="Objective lens (mA)"
	SetVariable setvar_OBJ,valueBackColor=(56797,56797,56797)
	//SetVariable setvar_OBJ,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[2][9]
	SetVariable setvar_Frame_kMax,pos={410.00,140.00},size={100.00,22.00},proc=SetVarProc_ARPES,title="k\\Bmax\\M (Å\\S-1\\M):"
	SetVariable setvar_Frame_kMax,fSize=10
	//SetVariable setvar_Frame_kMax,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][10]
	SetVariable setvar_Frame_pMin,pos={254.00,167.00},size={60.00,17.00},proc=SetVarProc_ARPES,title="p\\Bmin\\M:"
	SetVariable setvar_Frame_pMin,fSize=10
	//SetVariable setvar_Frame_pMin,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][36]
	SetVariable setvar_Frame_pMax,pos={320.00,167.00},size={60.00,17.00},proc=SetVarProc_ARPES,title="p\\Bmax\\M:"
	SetVariable setvar_Frame_pMax,fSize=10
	//SetVariable setvar_Frame_pMax,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][37]
	SetVariable setvar_Frame_qMin,pos={254.00,187.00},size={60.00,17.00},proc=SetVarProc_ARPES,title="q\\Bmin\\M:"
	SetVariable setvar_Frame_qMin,fSize=10
	//SetVariable setvar_Frame_qMin,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][38]
	SetVariable setvar_Frame_qMax,pos={320.00,187.00},size={60.00,17.00},proc=SetVarProc_ARPES,title="q\\Bmin\\M:"
	SetVariable setvar_Frame_qMax,fSize=10
	//SetVariable setvar_Frame_qMax,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][39]
	SetVariable setvar_pPixSize,pos={385.00,162.00},size={130.00,21.00},proc=SetVarProc_ARPES,title="A\\S-1\\M per p pixel:"
	SetVariable setvar_pPixSize,fSize=10,valueBackColor=(56797,56797,56797),noedit= 1
	//SetVariable setvar_pPixSize,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][40]
	SetVariable setvar_qPixSize,pos={385.00,184.00},size={130.00,21.00},proc=SetVarProc_ARPES,title="A\\S-1\\M per q pixel:"
	SetVariable setvar_qPixSize,fSize=10,valueBackColor=(56797,56797,56797),noedit= 1
	//SetVariable setvar_qPixSize,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][41]
	
	Button Button_LoadScreen,pos={250.00,214.00},size={110.00,16.00},proc=ButtonProc_ARPES,title="Define screen.."
	Button Button_LoadScreen,fSize=10
	Button Button_kSetScale,pos={369.00,214.00},size={110.00,16.00},proc=ButtonProc_ARPES,title="Set k scale.."
	Button Button_kSetScale,fSize=10
	
	PopupMenu popup_CursorColor,pos={244.00,237.00},size={116.00,23.00},proc=PopMenuProc_ARPES,title="Cursor color:"
	PopupMenu popup_CursorColor,fSize=10
	PopupMenu popup_CursorColor,mode=6,popColor= (0,0,0),value= #"\"*COLORPOP*\""
	
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 10,fstyle= 1
	DrawText /W=$ARPES_Panel_Name 366,245,"Suggestion:"
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 10
	DrawText /W=$ARPES_Panel_Name 365,258,"Cursor A - Center of the Brillouin Zone"
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 10
	DrawText /W=$ARPES_Panel_Name 365,271,"Cursor B - Radius of the k-space plot"
	
	////////////////////////////////
	//SURVEY ARPES (rotating plane)
	////////////////////////////////
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 14,fstyle=1
	DrawText /W=$ARPES_Panel_Name 14,312,"Energy - momentum map survey"
	
	Slider Slider_ARPESVolFrame_Rot,pos={13.00,315.00},size={312.00,16.00},vert= 0,proc=SliderProc_ARPES
	Slider Slider_ARPESVolFrame_Rot,limits={0,179,1},value= 38,side= 0,ticks= 0
	
	Display /W=(12,329,326,630)/HOST=$(ARPES_Panel_Name) /N=EK_ARPES
	
	SetVariable setvar_SliceNo,pos={337.00,313.00},size={80.00,14.00},proc=SetVarProc_ARPES,title="Slice:"
	SetVariable setvar_SliceNo,valueBackColor=(56797,56797,56797),noedit= 1
	//SetVariable setvar_SliceNo,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][21]
	SetVariable setvar_Angle,pos={424.00,313.00},size={100.00,14.00},proc=SetVarProc_ARPES,title="Angle (deg.)"
	SetVariable setvar_Angle,valueBackColor=(56797,56797,56797),noedit= 1
	//SetVariable setvar_Angle,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][26]
	SetVariable setvar_NTheta,pos={337.00,332.00},size={140.00,14.00},proc=SetVarProc_ARPES,title="Number of slices"
	SetVariable setvar_NTheta,valueBackColor=(61166,61166,61166),noedit= 1
	//SetVariable setvar_NTheta,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][20],noedit= 1
	SetVariable setvar_hv,pos={337.00,350.00},size={140.00,14.00},proc=SetVarProc_ARPES,title="Photon energy (eV)"
	//SetVariable setvar_hv,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][14]
	SetVariable setvar_aWF,pos={336.00,367.00},size={140.00,14.00},proc=SetVarProc_ARPES,title="Work function (eV)"
	//SetVariable setvar_aWF,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][15]
	
	///////////////////
	//SCALE CONVERSION
	//////////////////
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 12
	DrawText /W=$ARPES_Panel_Name 337,408,"Scale convertions"
	CheckBox check_Eaxis,pos={343.00,410.00},size={126.00,16.00},proc=CheckProc_ARPES,title="Binding energy for y axis"
	CheckBox check_Eaxis,value= 1
	CheckBox check_kaxis,pos={343.00,428.00},size={65.00,16.00},proc=CheckProc_ARPES,title="k for x axis"
	CheckBox check_kaxis,value= 1
	
	/////////
	//EXPORT
	/////////
	SetDrawEnv /W=$ARPES_Panel_Name linethick= 0,rounding= 20,fillfgc= (62194,56797,22616)
	DrawRRect /W=$ARPES_Panel_Name 334,474,535,628
	
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 14, fstyle=1
	DrawText /W=$ARPES_Panel_Name 342,498,"Export"	
	
	CheckBox check_Exp_ARPES_Survey,pos={343.00,503.00},size={47.00,16.00},proc=CheckProc_ARPES,title="Survey"
	CheckBox check_Exp_ARPES_Survey,value= 1
	CheckBox check_Exp_ARPES_HiSym,pos={397.00,503.00},size={104.00,16.00},proc=CheckProc_ARPES,title="Hi-symmetry points"
	CheckBox check_Exp_ARPES_HiSym,value= 1
	
	PopupMenu popup_ExpFileType,pos={343.00,521.00},size={177.00,23.00},bodyWidth=123,proc=PopMenuProc_ARPES,title="Export type"
	PopupMenu popup_ExpFileType,fSize=9
	PopupMenu popup_ExpFileType,mode=4,popvalue="Igor graph",value= #"\"JPEG;TIFF;PDF;Igor graph;Igor layout\""
	
	SetVariable setvar_ExpBaseName,pos={343.00,542.00},size={183.00,14.00},title="Base name"
	SetVariable setvar_ExpBaseName,value= root:Package_SLP:ARPES:Export_BaseName
	
	SetVariable setvar_ExpFolder,pos={343.00,564.00},size={181.00,14.00},title="Directory"
	SetVariable setvar_ExpFolder,value= root:Package_SLP:ARPES:Export_Directory
	
	SetVariable setvar_ExpIndex,pos={343.00,584.00},size={100.00,14.00},title="Export number"
	SetVariable setvar_ExpIndex,limits={0,inf,1},value= root:Package_SLP:ARPES:Export_count
	
	Button button_ExpBrowse,pos={474.00,581.00},size={50.00,16.00},proc=ButtonProc_ARPES,title="Browse.."
	Button button_ExpBrowse,fSize=10
	
	CheckBox check_ExpAddNote,pos={346.00,603.00},size={38.00,16.00},proc=CheckProc_ARPES,title="Note"
	CheckBox check_ExpAddNote,value= 0
	
	Button Button_Export,pos={444.00,604.00},size={80.00,16.00},proc=ButtonProc_ARPES,title="Export"
	Button Button_Export,fSize=10
	
	////////////
	//SCAN LIST
	////////////
	Button Button_LoadScan,pos={719.00,4.00},size={70.00,16.00},proc=ButtonProc_ARPES,title="Load scan.."
	Button Button_LoadScan,fSize=10
	Button Button_DeleteScan,pos={794.00,4.00},size={70.00,16.00},proc=ButtonProc_ARPES,title="Delete scan"
	Button Button_DeleteScan,fSize=10
	
	ListBox list_ScanList,pos={553.00,24.00},size={306.00,147.00},proc=ListBoxProc_ARPES_ScanList
	ListBox list_ScanList,listWave=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispW
	ListBox list_ScanList,selWave=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispSelW
	ListBox list_ScanList,mode=2
	ListBox list_ScanList,widths={30,70,80,30,30,30,30,30,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1}
	ListBox list_ScanList,userColumnResize= 1
	
	/////////////////////
	//HI-SYMMETRY POINTS
	/////////////////////
	SetDrawEnv /W=$ARPES_Panel_Name linethick= 0,rounding= 20,fillfgc= (62194,56797,22616)
	DrawRRect /W=$ARPES_Panel_Name 547,177,858,326
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 14,fstyle=1
	DrawText /W=$ARPES_Panel_Name 554,200,"High symmetry points"
	
	SetVariable setvar_HiSymPoint1_name,pos={554.00,205.00},size={120.00,16.00},proc=SetVarProc_ARPES,title="Point 1 name"
	SetVariable setvar_HiSymPoint1_name,fSize=10
	//SetVariable setvar_HiSymPoint1_name,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][42]
	SetVariable setvar_HiSymPoint1_p,pos={678.00,205.00},size={50.00,16.00},proc=SetVarProc_ARPES,title="p:"
	SetVariable setvar_HiSymPoint1_p,fSize=10
//	SetVariable setvar_HiSymPoint1_p,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][43]
	SetVariable setvar_HiSymPoint1_q,pos={733.00,205.00},size={50.00,16.00},proc=SetVarProc_ARPES,title="q:"
	SetVariable setvar_HiSymPoint1_q,fSize=10
//	SetVariable setvar_HiSymPoint1_q,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][44]
	SetVariable setvar_HiSymPoint2_name,pos={554.00,224},size={120.00,16.00},proc=SetVarProc_ARPES,title="Point 2 name"
	SetVariable setvar_HiSymPoint2_name,fSize=10
//	SetVariable setvar_HiSymPoint2_name,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][45]
	SetVariable setvar_HiSymPoint2_p,pos={678.00,224},size={50.00,16.00},proc=SetVarProc_ARPES,title="p:"
	SetVariable setvar_HiSymPoint2_p,fSize=10
//	SetVariable setvar_HiSymPoint2_p,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][46]
	SetVariable setvar_HiSymPoint2_q,pos={733.00,224},size={50.00,16.00},proc=SetVarProc_ARPES,title="q:"
	SetVariable setvar_HiSymPoint2_q,fSize=10
//	SetVariable setvar_HiSymPoint2_q,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][47]
	SetVariable setvar_HiSymPoint3_name,pos={554.00,243},size={120.00,16.00},proc=SetVarProc_ARPES,title="Point 3 name"
	SetVariable setvar_HiSymPoint3_name,fSize=10
//	SetVariable setvar_HiSymPoint3_name,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][48]
	SetVariable setvar_HiSymPoint3_p,pos={678.00,243},size={50.00,16.00},proc=SetVarProc_ARPES,title="p:"
	SetVariable setvar_HiSymPoint3_p,fSize=10
//	SetVariable setvar_HiSymPoint3_p,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][49]
	SetVariable setvar_HiSymPoint3_q,pos={733.00,243},size={50.00,16.00},proc=SetVarProc_ARPES,title="q:"
	SetVariable setvar_HiSymPoint3_q,fSize=10
//	SetVariable setvar_HiSymPoint3_q,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][50]
	SetVariable setvar_HiSymPoint4_name,pos={554.00,263},size={120.00,16.00},proc=SetVarProc_ARPES,title="Point 4 name"
	SetVariable setvar_HiSymPoint4_name,fSize=10
//	SetVariable setvar_HiSymPoint4_name,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][51]
	SetVariable setvar_HiSymPoint4_p,pos={678.00,263},size={50.00,16.00},proc=SetVarProc_ARPES,title="p:"
	SetVariable setvar_HiSymPoint4_p,fSize=10
//	SetVariable setvar_HiSymPoint4_p,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][52]
	SetVariable setvar_HiSymPoint4_q,pos={733.00,263},size={50.00,16.00},proc=SetVarProc_ARPES,title="q:"
	SetVariable setvar_HiSymPoint4_q,fSize=10
//	SetVariable setvar_HiSymPoint4_q,value= root:Package_SLP:ARPES:SLP_ARPES_ScanListW[3][53]
	Button Button_HighSym1CursorA,pos={786.00,205},size={30.00,16.00},proc=ButtonProc_ARPES,title="A"
	Button Button_HighSym1CursorA,fSize=10
	Button Button_HighSym1CursorB,pos={819.00,205},size={30.00,16.00},proc=ButtonProc_ARPES,title="B"
	Button Button_HighSym1CursorB,fSize=10
	Button Button_HighSym2CursorA,pos={786.00,224},size={30.00,16.00},proc=ButtonProc_ARPES,title="A"
	Button Button_HighSym2CursorA,fSize=10
	Button Button_HighSym2CursorB,pos={819.00,224},size={30.00,16.00},proc=ButtonProc_ARPES,title="B"
	Button Button_HighSym2CursorB,fSize=10
	Button Button_HighSym3CursorA,pos={786.00,243},size={30.00,16.00},proc=ButtonProc_ARPES,title="A"
	Button Button_HighSym3CursorA,fSize=10
	Button Button_HighSym3CursorB,pos={819.00,243},size={30.00,16.00},proc=ButtonProc_ARPES,title="B"
	Button Button_HighSym3CursorB,fSize=10
	Button Button_HighSym4CursorA,pos={786.00,262},size={30.00,16.00},proc=ButtonProc_ARPES,title="A"
	Button Button_HighSym4CursorA,fSize=10
	Button Button_HighSym4CursorB,pos={819.00,262},size={30.00,16.00},proc=ButtonProc_ARPES,title="B"
	Button Button_HighSym4CursorB,fSize=10
	
	SetDrawEnv /W=$ARPES_Panel_Name fsize= 10
	DrawText /W=$ARPES_Panel_Name 558,307,"E-k planes are ordered from left to right by \rthe point number. Leave point name blank to skip"
	
	Button Button_CreateHiSymARPES,pos={554.00,307},size={140.00,16.00},proc=ButtonProc_ARPES,title="Create ARPES band map"
	Button Button_CreateHiSymARPES,fSize=10
	
	Display/W=(548,338,859,607)/HOST=$ARPES_Panel_Name /N=HiSym_ARPES
	
	Button Button_Done,pos={794.00,617.00},size={70.00,16.00},proc=ButtonProc_ARPES,title="Done"
	Button Button_Done,fSize=10
	
	If (Dimsize(root:Package_SLP:ARPES:SLP_ARPES_ScanListW,0)>0)
		SLP_ARPES_DisplaySelectedData(ScanSel)
	EndIf
	
End

//Function ARPES_Process(smoothPoints)
//	Variable smoothPoints
//
//	Wave ARPES06_copy
//	
//	variable i,j,k
//	Make /O/N=(dimsize(ARPES06_copy,2)) PhotoEmissionW
//	Duplicate /O ARPES06_copy,ARPES06_Proc
//	ARPES06_Proc=NaN
//	For (i=0;i<dimsize(ARPES06_copy,0);i+=1)
//		For (j=0;j<dimsize(ARPES06_copy,1);j+=1)
//			PhotoEmissionW[]=ARPES06_copy[i][j][p]
//			Smooth/S=2 smoothPoints,PhotoEmissionW
//			Differentiate PhotoEmissionW /D=PhotoEmissionW_Diff
//			Differentiate PhotoEmissionW_Diff /D=PhotoEmissionW_Diff
//			ARPES06_Proc[i][j][]=PhotoEmissionW_Diff[r]
//		EndFor
//	EndFor
//	Wave ARPES06=root:Package_SLP:ARPES:ARPES06:ARPES06
//	ARPES06=ARPES06_proc
//End

Function ListBoxProc_ARPES_ScanList(lba) : ListBoxControl
	//MODIFIED: 26.01.2021 - Bug fixes on preventing users from clicking blank rows.
	
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			If (Row>=0&&Row<dimsize(root:Package_SLP:ARPES:SLP_ARPES_ScanListW,0))
				NVAR ScanSel=root:Package_SLP:ARPES:ScanSel 
				ScanSel=Row
				SLP_ARPES_DisplaySelectedData(Row)
			EndIf
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End


//Function ARPES_Diff()
//
//	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
//	Variable SelRow=V_Value
//	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
//	String ScanName=SLP_ARPES_ScanListW[SelRow][0]
//	Wave ARPES_Vol=$(SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0])
//	Wave ARPES_EvK=$(SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0]+"_EvK_Vol")
//	variable i,j,k
//	Make /O/N=(dimsize(ARPES_EvK,2)) PhotoEmissionW
//	For (i=0;i<dimsize(ARPES_EvK,0);i+=1)
//		For (j=0;j<dimsize(ARPES_EvK,1);j+=1)
//			PhotoEmissionW[]=ARPES_EvK[i][j][p]
//			Smooth/S=2 5,PhotoEmissionW
//			Differentiate PhotoEmissionW /D=PhotoEmissionW
//			Differentiate PhotoEmissionW /D=PhotoEmissionW
//			ARPES_EvK[i][j][]=PhotoEmissionW[r]
//		EndFor
//	EndFor
//	
//End

Function SLP_ARPES_Init()
	//MODIFIED: 20.01.2021 - add SetDimLabel
	//MODIFIED: 26.01.2021 - Update for new ARPES Panel functions
	string Current_folder=getdatafolder(1)
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:ARPES
	
	SetDataFolder root:Package_SLP:ARPES
	Make /T/O/N=(0,64) SLP_ARPES_ScanListW //[MODIFIED: 21.01.2021] Increase column no. from 32 -> 64
	SetDimLabel 1,0,ScanName,SLP_ARPES_ScanListW
	SetDimLabel 1,1,ScanFolder,SLP_ARPES_ScanListW
	SetDimLabel 1,2,RawDataDir,SLP_ARPES_ScanListW
	SetDimLabel 1,3,DateCreated,SLP_ARPES_ScanListW
	SetDimLabel 1,4,DateModified,SLP_ARPES_ScanListW
	SetDimLabel 1,5,FrameNo,SLP_ARPES_ScanListW
	SetDimLabel 1,6,MinInt,SLP_ARPES_ScanListW
	SetDimLabel 1,7,MaxInt,SLP_ARPES_ScanListW
	SetDimLabel 1,8,ColorTable,SLP_ARPES_ScanListW
	SetDimLabel 1,9,OBJ,SLP_ARPES_ScanListW
	SetDimLabel 1,10,kMax,SLP_ARPES_ScanListW
	SetDimLabel 1,11,StvStart,SLP_ARPES_ScanListW
	SetDimLabel 1,12,StvEnd,SLP_ARPES_ScanListW
	SetDimLabel 1,13,StvStep,SLP_ARPES_ScanListW
	SetDimLabel 1,14,hv,SLP_ARPES_ScanListW
	SetDimLabel 1,15,aWF,SLP_ARPES_ScanListW
	SetDimLabel 1,16,CursorA_p,SLP_ARPES_ScanListW
	SetDimLabel 1,17,CursorA_q,SLP_ARPES_ScanListW
	SetDimLabel 1,18,CursorB_p,SLP_ARPES_ScanListW
	SetDimLabel 1,19,CursorB_q,SLP_ARPES_ScanListW
	SetDimLabel 1,20,NSlices,SLP_ARPES_ScanListW
	SetDimLabel 1,21,RotPlaneNo,SLP_ARPES_ScanListW
	SetDimLabel 1,22,ConvertE_Flg,SLP_ARPES_ScanListW
	SetDimLabel 1,23,ConvertK_Flg,SLP_ARPES_ScanListW
	SetDimLabel 1,24,kMax_notused,SLP_ARPES_ScanListW //THis should be removed
	SetDimLabel 1,25,Unused3,SLP_ARPES_ScanListW
	SetDimLabel 1,26,Unused4,SLP_ARPES_ScanListW
	SetDimLabel 1,27,CursorR,SLP_ARPES_ScanListW
	SetDimLabel 1,28,CursorG,SLP_ARPES_ScanListW
	SetDimLabel 1,29,CursorB,SLP_ARPES_ScanListW
	SetDimLabel 1,30,Unused5,SLP_ARPES_ScanListW
	SetDimLabel 1,31,Unused6,SLP_ARPES_ScanListW
	//[MODIFIED: 21.01.2021] Increase column no. from 32 -> 64
	SetDimLabel 1,32,Center_p,SLP_ARPES_ScanListW //For rot. ARPES extraction
	SetDimLabel 1,33,Center_q,SLP_ARPES_ScanListW //For rot. ARPES extraction
	SetDimLabel 1,34,Circumf_p,SLP_ARPES_ScanListW //For rot. ARPES extraction
	SetDimLabel 1,35,Circumf_q,SLP_ARPES_ScanListW //For rot. ARPES extraction
	SetDimLabel 1,36,Screen_pMin,SLP_ARPES_ScanListW //For setScale in k space
	SetDimLabel 1,37,Screen_pMax,SLP_ARPES_ScanListW //For setScale in k space
	SetDimLabel 1,38,Screen_qMin,SLP_ARPES_ScanListW //For setScale in k space
	SetDimLabel 1,39,Screen_qMax,SLP_ARPES_ScanListW //For setScale in k space
	SetDimLabel 1,40,pPixSize,SLP_ARPES_ScanListW //For setScale in k space
	SetDimLabel 1,41,qPixSize,SLP_ARPES_ScanListW //For setScale in k space
	SetDimLabel 1,42,point1_Name,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,43,point1_p,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,44,point1_q,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,45,point2_Name,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,46,point2_p,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,47,point2_q,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,48,point3_Name,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,49,point3_p,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,50,point3_q,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,51,point4_Name,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,52,point4_p,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,53,point4_q,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,54,HiSymName_List,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	SetDimLabel 1,55,HiSymLine_p_List,SLP_ARPES_ScanListW //For ARPES band map with high symmetry points
	
	Make /T/O/N=(0,32) SLP_ARPES_ScanListDispW
	SetDimLabel 1,0,Chk,SLP_ARPES_ScanListDispW
	SetDimLabel 1,1,ScanName,SLP_ARPES_ScanListDispW
	SetDimLabel 1,2,ScanNote,SLP_ARPES_ScanListDispW
	SetDimLabel 1,3,OBJ,SLP_ARPES_ScanListDispW
	SetDimLabel 1,4,IL,SLP_ARPES_ScanListDispW
	SetDimLabel 1,5,P3,SLP_ARPES_ScanListDispW
	SetDimLabel 1,6,P3DeflX,SLP_ARPES_ScanListDispW
	SetDimLabel 1,7,P3DeflY,SLP_ARPES_ScanListDispW
	
	Make /O/N=(0,32) SLP_ARPES_ScanListDispSelW
	
	Variable /G ScanSel=0
	Variable /G FrameNum=0
	String /G Export_BaseName="ARPES_Export"
	String /G Export_Directory=""
	Variable /G Export_count=0
	Variable /G MaxInt
	Variable /G MinInt
	Variable /G IntSlider_Min=0
	Variable /G IntSlider_Max=10000
	Variable /G IntSlider_Step=1
	
	SetDataFolder root:
End

Function SetVarProc_ARPES(sva) : SetVariableControl
	//Modified: 20.01.2021 - SetVar_MaxInt, SetVar_MinInt = use global variables
	
	STRUCT WMSetVariableAction &sva
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	String ScanName=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_Vol_FName=SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0]
	//[Modified: 20.01.2021] - Use global variable
	NVAR MinInt=root:Package_SLP:ARPES:MinInt
	NVAR MaxInt=root:Package_SLP:ARPES:MaxInt
	
	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			strswitch(sva.CtrlName)	// string switch
				case "setvar_MinInt":	
				case "setvar_MaxInt":	
					SLP_ARPES_ScanListW[SelRow][6]=num2str(MinInt)
					SLP_ARPES_ScanListW[SelRow][7]=num2str(MaxInt)
//					modifyImage /W=SLP_ARPES_Panel_01#Raw_ARPES $(ScanName),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
//					modifyImage /W=SLP_ARPES_Panel_01#EK_ARPES $(ScanName+"_Evk_Vol"),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
					If (Exists(ARPES_Vol_FName+"_Evk_Vol"))
							modifyImage /W=SLP_ARPES_Panel_01#EK_ARPES $(ScanName+"_Evk_Vol"),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
						EndIf
						If (Exists(ARPES_Vol_FName+"_Evk_HiSym_W"))
							modifyImage /W=SLP_ARPES_Panel_01#HiSym_ARPES $(ScanName+"_Evk_HiSym_W"),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
						EndIf
					break
				case "setvar_hv":
				case "setvar_aWF":
					If (str2num(SLP_ARPES_ScanListW[SelRow][22]))
						SLP_ARPES_SetEaxis(1)
					Endif
					break
//				case "setvar_kMax":
//					if (str2num(SLP_ARPES_ScanListW[SelRow][23]))
//						SLP_ARPES_Setkaxis(1)
//					EndIf
//					break
				case "setvar_Frame_kMax":
				case "setvar_Frame_pMin":
				case "setvar_Frame_pMax":
				case "setvar_Frame_qMin":
				case "setvar_Frame_qMax":
					SLP_ARPES_DrawScreenFrame()
					SLP_ARPES_CalcPxSize()
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SliderProc_ARPES(sa) : SliderControl
	//MODIFIED: 20.01.2021 - Add more sliders for SetVar_MaxInt, SetVar_MinInt = use global variables
	
	STRUCT WMSliderAction &sa
	
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	//Find the image name (should be the same as ImgVol name) [TODO: proper use = Image name..]
	String CurrentImgeName=SLP_ARPES_ScanListW[SelRow][0]
	//[Modified: 20.01.2021] - Use global variable
	String ScanName=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_Vol_FName=SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0]
	Wave ARPES_Vol=$(ARPES_Vol_FName)
	NVAR MinInt=root:Package_SLP:ARPES:MinInt
	NVAR MaxInt=root:Package_SLP:ARPES:MaxInt
	
	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				
				strswitch(sa.CtrlName)	// string switch
					case "Slider_ARPESVolFrame":	
						modifyimage /W=SLP_ARPES_Panel_01#Raw_ARPES $CurrentImgeName plane=(curval)
						SLP_ARPES_ScanListW[SelRow][5]=num2str(curval)
						SLP_ARPES_DrawELine(curval)
						String STV_Txt="STV = "+num2str(IndexToScale(ARPES_Vol,curval,2))+" eV"
						TextBox /C/N=STVText /W=SLP_ARPES_Panel_01#Raw_ARPES /A=LT/F=0/B=1/G=(65535,65535,0)/X=2.50/Y=1 STV_Txt
						Break
					case "Slider_ARPESVolFrame_Rot":
						ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
						SelRow=V_Value
						Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
						//Find the image name (should be the same as ImgVol name) [TODO: proper use = Image name..]
						CurrentImgeName=SLP_ARPES_ScanListW[SelRow][0]+"_Evk_Vol"
						
						modifyimage /W=SLP_ARPES_Panel_01#EK_ARPES $CurrentImgeName plane=(curval)
						SLP_ARPES_ScanListW[SelRow][21]=num2str(curval)
						Variable N_Theta=str2num(SLP_ARPES_ScanListW[SelRow][20])
						SLP_ARPES_ScanListW[SelRow][26]=num2str(curval*360/N_Theta)
						
						SLP_ARPES_DrawkLine(curval)
						Break
					case "Slider_MinInt":
					case "Slider_MaxInt":
						SLP_ARPES_ScanListW[SelRow][6]=num2str(MinInt)
						SLP_ARPES_ScanListW[SelRow][7]=num2str(MaxInt)
						modifyImage /W=SLP_ARPES_Panel_01#Raw_ARPES $(ScanName),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
						If (Exists(ARPES_Vol_FName+"_Evk_Vol"))
							modifyImage /W=SLP_ARPES_Panel_01#EK_ARPES $(ScanName+"_Evk_Vol"),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
						EndIf
						If (Exists(ARPES_Vol_FName+"_Evk_HiSym_W"))
							modifyImage /W=SLP_ARPES_Panel_01#HiSym_ARPES $(ScanName+"_Evk_HiSym_W"),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[SelRow][8]),0}
						EndIf
						Break
				EndSwitch
			endif
			break
	endswitch

	return 0
End

Function SLP_ARPES_DrawkLine(RotPlaneNo) //ThetaStepN = step number of theta
	//[MODIFIED: 21.01.2021] - Use p,q instead of x,y so that the drawing doesn't depend on the scaling
	
	variable RotPlaneNo
	Variable dotSize=5
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Wave ARPES_Vol=$(SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0])
	Variable pCenter=str2num(SLP_ARPES_ScanListW[SelRow][32])
	Variable qCenter=str2num(SLP_ARPES_ScanListW[SelRow][33])
	Variable pCircumf=str2num(SLP_ARPES_ScanListW[SelRow][34])
	Variable qCircumf=str2num(SLP_ARPES_ScanListW[SelRow][35])
	Variable NTheta=str2num(SLP_ARPES_ScanListW[SelRow][20])
	
	variable Theta0
	
	If (pCircumf-pCenter==0)
		If (qCircumf-qCenter>0)
			Theta0=pi/2
		ElseIf (qCircumf<qCenter>0)
			Theta0=-1*pi/2
		EndIf
	Elseif (pCircumf-pCenter>0)
		Theta0=atan((qCircumf-qCenter)/(pCircumf-pCenter))
	Elseif (pCircumf-pCenter<0)
		Theta0=atan((qCircumf-qCenter)/(pCircumf-pCenter))+pi
	EndIf
	
	
	variable Theta=Theta0+RotPlaneNo*(2*pi/NTheta)
	Variable Theta_deg=Theta*180/pi
	
	variable kRadius=floor(sqrt((pCircumf-pCenter)^2+(qCircumf-qCenter)^2))
	
	variable CRed=str2num(SLP_ARPES_ScanListW[SelRow][27])
	variable CGreen=str2num(SLP_ARPES_ScanListW[SelRow][28])
	variable CBlue=str2num(SLP_ARPES_ScanListW[SelRow][29])
	
	variable x1=IndexToScale(ARPES_Vol,pCenter-kRadius*(cos(Theta)),0)
	variable y1=IndexToScale(ARPES_Vol,qCenter-kRadius*(sin(Theta)),1)
	variable x2=IndexToScale(ARPES_Vol,pCenter+kRadius*(cos(Theta)),0)
	variable y2=IndexToScale(ARPES_Vol,qCenter+kRadius*(sin(Theta)),1)
	
	setdrawlayer /W=SLP_ARPES_Panel_01#Raw_ARPES UserFront
	drawaction /W=SLP_ARPES_Panel_01#Raw_ARPES  delete
	SetDrawEnv /W=SLP_ARPES_Panel_01#Raw_ARPES xcoord= bottom,ycoord= left,linefgc=(CRed,CGreen,CBlue ),dash=0,arrow=1,linethick=2 //arrow=1 = at the end
	drawline /W=SLP_ARPES_Panel_01#Raw_ARPES  x1,y1,x2,y2
	
	Variable Dot_X1=IndexToScale(ARPES_Vol,pCenter,0)-dotSize*(DimDelta(ARPES_Vol,0))
	Variable Dot_Y1=IndexToScale(ARPES_Vol,qCenter,1)-dotSize*(DimDelta(ARPES_Vol,1))
	Variable Dot_X2=IndexToScale(ARPES_Vol,pCenter,0)+dotSize*(DimDelta(ARPES_Vol,0))
	Variable Dot_Y2=IndexToScale(ARPES_Vol,qCenter,1)+dotSize*(DimDelta(ARPES_Vol,1))
	
	SetDrawEnv /W=SLP_ARPES_Panel_01#Raw_ARPES xcoord=bottom,ycoord=left,fillfgc= (CRed,CGreen,CBlue),Linefgc= (CRed,CGreen,CBlue)
	DrawOval /W=SLP_ARPES_Panel_01#Raw_ARPES Dot_X1,Dot_Y1,Dot_X2,Dot_Y2
	
End

Function SLP_UTIL_Calculate_kMax(OBJ)
	//CREATED: 21.01.2021
	//DESCRIPTIONs: k space is calibrated and the maximum k is the size of the LEEM/PEEM screen. 
	//						The k_max is linearly proportional to the OBJ that make image in focus at different working distance.
	//						User need to find this OBJ value that make object in focus in real space before doing ARPES.
	
	Variable OBJ // This is actually the working distance in term of OBJ (mA). 
	Variable kMax // In A^-1
	
	kMax=-2.7129+0.0063429*OBJ
	//CALIBRATED IN 09.2020
	
	Return kMax
End

Function SLP_ARPES_CalcPxSize()
	//CREATED: 21.01.2021
	//DESCRIPTIONs: Calculate the pixel size (hor. and ver.) from kMax and screen size.
	
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	
	Variable kMax=str2num(SLP_ARPES_ScanListW[SelRow][10])
	
	Variable pMin=str2num(SLP_ARPES_ScanListW[SelRow][36])
	Variable pMax=str2num(SLP_ARPES_ScanListW[SelRow][37])
	Variable qMin=str2num(SLP_ARPES_ScanListW[SelRow][38])
	Variable qMax=str2num(SLP_ARPES_ScanListW[SelRow][39])
	
	Variable pPixSize=kMax/(pMax-pMin)
	Variable qPixSize=kMax/(qMax-qMin)
	
	SLP_ARPES_ScanListW[SelRow][40]=num2str(pPixSize)
	SLP_ARPES_ScanListW[SelRow][41]=num2str(qPixSize)

End

Function SLP_ARPES_SetScaleRaw(p00,q00)
	//CREATED: 22.01.2021
	//DESCRIPTIONs: SetScale x and y for Raw ARPES volume into k space
	
	Variable p00,q00
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Variable pPixSize=str2num(SLP_ARPES_ScanListW[SelRow][40])
	Variable qPixSize=str2num(SLP_ARPES_ScanListW[SelRow][41])
	
	Wave ARPES_Vol=$(SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0])
	
	SetScale /P x,-p00*pPixSize,pPixSize,"Å^-1",ARPES_Vol
	SetScale /P y,-q00*qPixSize,qPixSize,"Å^-1",ARPES_Vol	
//	SetScale /P x,0,pPixSize,ARPES_Vol
//	SetScale /P y,0,qPixSize,ARPES_Vol
ENd

Function SLP_ARPES_DrawScreenFrame()
	//CREATED: 21.01.2021
	//DESCRIPTIONs: Draw a frame over the RAW ARPES display from the ver/hor. edges of the screen.
	
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Wave ARPES_Vol=$(SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0])
	Variable xMin=IndexToScale(ARPES_Vol,str2num(SLP_ARPES_ScanListW[SelRow][36]),0)
	Variable xMax=IndexToScale(ARPES_Vol,str2num(SLP_ARPES_ScanListW[SelRow][37]),0)
	Variable yMin=IndexToScale(ARPES_Vol,str2num(SLP_ARPES_ScanListW[SelRow][38]),1)
	Variable yMax=IndexToScale(ARPES_Vol,str2num(SLP_ARPES_ScanListW[SelRow][39]),1)
	setdrawlayer /W=SLP_ARPES_Panel_01#RAW_ARPES UserFront
	drawaction /W=SLP_ARPES_Panel_01#RAW_ARPES  delete
	SetDrawEnv /W=SLP_ARPES_Panel_01#RAW_ARPES xcoord=bottom,ycoord=left,linefgc=(65535,0,0)
	drawline /W=SLP_ARPES_Panel_01#RAW_ARPES  xMin,yMin,xMin,yMax
	SetDrawEnv /W=SLP_ARPES_Panel_01#RAW_ARPES xcoord=bottom,ycoord=left,linefgc=(65535,0,0)
	drawline /W=SLP_ARPES_Panel_01#RAW_ARPES  xMax,yMin,xMax,yMax
	SetDrawEnv /W=SLP_ARPES_Panel_01#RAW_ARPES xcoord=bottom,ycoord=left,linefgc=(65535,0,0)
	drawline /W=SLP_ARPES_Panel_01#RAW_ARPES  xMin,yMin,xMax,yMin
	SetDrawEnv /W=SLP_ARPES_Panel_01#RAW_ARPES xcoord=bottom,ycoord=left,linefgc=(65535,0,0)
	drawline /W=SLP_ARPES_Panel_01#RAW_ARPES  xMin,yMax,xMax,yMax
ENd

Function SLP_ARPES_DrawELine(FrameNo) 
	//[MODIFIED: 21.01.2021]
	//[MODIFIED: 26.01.2021] - Use: indexToScale(ARPESW_Survey_Vol,FrameNo,1) for energy line position (more convenient)
	Variable FrameNo //**EStep is the current frame no. (not energy)

	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Variable STVStart=str2num(SLP_ARPES_ScanListW[SelRow][11])
	Variable STVStep=str2num(SLP_ARPES_ScanListW[SelRow][13])
	Variable hv=str2num(SLP_ARPES_ScanListW[SelRow][14])
	Variable aWF=str2num(SLP_ARPES_ScanListW[SelRow][15])
	//Variable yE_flg=str2num(SLP_ARPES_ScanListW[SelRow][22])
	Variable xk_flg=str2num(SLP_ARPES_ScanListW[SelRow][23])
	
	variable BE=hv-(STVStart+FrameNo*STVStep)-aWF

	variable CRed=str2num(SLP_ARPES_ScanListW[SelRow][27])
	variable CGreen=str2num(SLP_ARPES_ScanListW[SelRow][28])
	variable CBlue=str2num(SLP_ARPES_ScanListW[SelRow][29])
	
	String ARPESW_FName=SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0]
	
	If (Exists(ARPESW_FName+"_Evk_Vol"))	
		Wave ARPESW_Survey_Vol=$(ARPESW_FName+"_Evk_Vol")
		variable x1=0 //use xcoord=prel
		variable y1=indexToScale(ARPESW_Survey_Vol,FrameNo,1) //[MODIFIED: 26.01.2021]
		variable x2=1 //use xcoord=prel
		variable y2=indexToScale(ARPESW_Survey_Vol,FrameNo,1) //[MODIFIED: 26.01.2021]

		setdrawlayer /W=SLP_ARPES_Panel_01#Ek_ARPES UserFront
		drawaction /W=SLP_ARPES_Panel_01#Ek_ARPES  delete
		SetDrawEnv /W=SLP_ARPES_Panel_01#Ek_ARPES xcoord=prel,ycoord= left,linefgc=(CRed,CGreen,CBlue ),dash=0,arrow=1,linethick=2
		drawline /W=SLP_ARPES_Panel_01#Ek_ARPES  x1,y1,x2,y2
	EndIf
End

Function SLP_ARPES_DisplaySelectedData(DataRow)
	//Modified: 20.01.2021
	
	Variable DataRow
	ListBox list_ScanList, SelRow=DataRow,win=SLP_ARPES_Panel_01
	
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Wave /T SLP_ARPES_ScanListDispW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispW
	Wave SLP_ARPES_ScanListDispSelW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispSelW
	
	//[Modified: 20.01.2021] - Use global variable
	NVAR MinInt=root:Package_SLP:ARPES:MinInt
	NVAR MaxInt=root:Package_SLP:ARPES:MaxInt
	
	String ScanName=SLP_ARPES_ScanListW[DataRow][0]
	
	String ARPESW_FName=SLP_ARPES_ScanListW[DataRow][1]+SLP_ARPES_ScanListW[DataRow][0]
	Wave ARPESW=$ARPESW_FName
	SLP_Util_AddnRmTraces("SLP_ARPES_Panel_01#Raw_ARPES",ARPESW_FName,1)
	SetAxis /W=SLP_ARPES_Panel_01#Raw_ARPES /A/R left //[MODIFIED: 21.01.2020] - 
	ModifyGraph /W=SLP_ARPES_Panel_01#Raw_ARPES noLabel=2,standoff=0,margin=3,tick=3
	modifyImage /W=SLP_ARPES_Panel_01#Raw_ARPES $ScanName,ctab={str2num(SLP_ARPES_ScanListW[DataRow][6]),str2num(SLP_ARPES_ScanListW[DataRow][7]),$(SLP_ARPES_ScanListW[DataRow][8]),0}
	modifyImage /W=SLP_ARPES_Panel_01#Raw_ARPES $ScanName,plane=(str2num(SLP_ARPES_ScanListW[DataRow][5]))
	
	//Set slider limit
	Slider Slider_ARPESVolFrame limits={0,dimsize(ARPESW,2)-1,1},win=SLP_ARPES_Panel_01,value=str2num(SLP_ARPES_ScanListW[DataRow][5])
	
	//Color table
	String CTable=SLP_ARPES_ScanListW[DataRow][8]
	PopupMenu popup_ColorTable01 mode=whichlistitem(CTable,ctablist(),";",0,0)+1
	
	//Cursor
	variable CRed=str2num(SLP_ARPES_ScanListW[DataRow][27])
	variable CGreen=str2num(SLP_ARPES_ScanListW[DataRow][28])
	variable CBlue=str2num(SLP_ARPES_ScanListW[DataRow][29])
	Cursor /I/P /W=SLP_ARPES_Panel_01#Raw_ARPES /C=(CRed,CGreen,CBlue) A $ScanName str2num(SLP_ARPES_ScanListW[DataRow][16]),str2num(SLP_ARPES_ScanListW[DataRow][17])
	Cursor /I/P /W=SLP_ARPES_Panel_01#Raw_ARPES /C=(CRed,CGreen,CBlue) B $ScanName str2num(SLP_ARPES_ScanListW[DataRow][18]),str2num(SLP_ARPES_ScanListW[DataRow][19])
	//k line
	SLP_ARPES_DrawkLine(str2num(SLP_ARPES_ScanListW[DataRow][21]))
	//k line color
	PopupMenu popup_CursorColor popColor=(CRed,CGreen,CBlue),win=SLP_ARPES_Panel_01
	
	//Intensity
	//Setvariable setvar_MinInt win=SLP_ARPES_Panel_01,value=_NUM:str2num(SLP_ARPES_ScanListW[DataRow][6]) //value=_NUM:number = trick for Igor (6.1). No need vfior variable
	//Setvariable setvar_MaxInt win=SLP_ARPES_Panel_01,value=_NUM:str2num(SLP_ARPES_ScanListW[DataRow][7])
	//[Modified: 20.01.2021] - Use global variable
	
	MinInt=str2num(SLP_ARPES_ScanListW[DataRow][6])
	MaxInt=str2num(SLP_ARPES_ScanListW[DataRow][7])
	
	//[Modified: 21.01.2021] update k and E lines
	Variable FrameNo=str2num(SLP_ARPES_ScanListW[DataRow][5])
	Variable RotPlaneNo=str2num(SLP_ARPES_ScanListW[DataRow][21])
	
	//SETVAR from ListW
	SetVariable setvar_OBJ win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][9]
	SetVariable setvar_Frame_kMax win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][10]
	SetVariable setvar_FrameNo win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][5]
	SetVariable setvar_NTheta win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][20]
	//SetVariable setvar_kMax win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][24]
	SetVariable setvar_Angle win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][26]
	
	SetVariable setvar_Frame_pMin win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][36]
	SetVariable setvar_Frame_pMax win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][37]
	SetVariable setvar_Frame_qMin win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][38]
	SetVariable setvar_Frame_qMax win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][39]
	
	SetVariable setvar_pPixSize win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][40]
	SetVariable setvar_qPixSize win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][41]
	
	SetVariable setvar_HiSymPoint1_name win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][42]
	SetVariable setvar_HiSymPoint1_p win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][43]
	SetVariable setvar_HiSymPoint1_q win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][44]
	SetVariable setvar_HiSymPoint2_name win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][45]
	SetVariable setvar_HiSymPoint2_p win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][46]
	SetVariable setvar_HiSymPoint2_q win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][47]
	SetVariable setvar_HiSymPoint3_name win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][48]
	SetVariable setvar_HiSymPoint3_p win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][49]
	SetVariable setvar_HiSymPoint3_q win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][50]
	SetVariable setvar_HiSymPoint4_name win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][51]
	SetVariable setvar_HiSymPoint4_p win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][52]
	SetVariable setvar_HiSymPoint4_q win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][53]

	//XPS param
	SetVariable setvar_hv win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][14]
	SetVariable setvar_aWF win=SLP_ARPES_Panel_01,value=root:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][15]
	
	//E as y axis flag
	Checkbox check_Eaxis win=SLP_ARPES_Panel_01, value=str2num(SLP_ARPES_ScanListW[DataRow][22])
	//k as x axis flag
	Checkbox check_kaxis win=SLP_ARPES_Panel_01, value=str2num(SLP_ARPES_ScanListW[DataRow][23])
	
	If (!Exists(ARPESW_FName+"_Evk_Vol"))
		SLP_Util_RemoveAllImages("SLP_ARPES_Panel_01#EK_ARPES") //[MODIFIED: 21.01.2021]
	Else
		SLP_Util_AddnRmTraces("SLP_ARPES_Panel_01#EK_ARPES",ARPESW_FName+"_Evk_Vol",1)	
		modifyImage /W=SLP_ARPES_Panel_01#EK_ARPES $(ScanName+"_Evk_Vol"),ctab={MinInt,MaxInt,$(SLP_ARPES_ScanListW[DataRow][8]),0}
		modifyImage /W=SLP_ARPES_Panel_01#EK_ARPES $(ScanName+"_Evk_Vol"),plane=(str2num(SLP_ARPES_ScanListW[DataRow][21]))
		//Set slider limit
		Slider Slider_ARPESVolFrame_Rot limits={0,str2num(SLP_ARPES_ScanListW[DataRow][20])-1,1},win=SLP_ARPES_Panel_01,value=str2num(SLP_ARPES_ScanListW[DataRow][21])
		//Slice
		SetVariable setvar_SliceNo win=SLP_ARPES_Panel_01,value=:Package_SLP:ARPES:SLP_ARPES_ScanListW[DataRow][21]
		
		SLP_ARPES_DrawELine(FrameNo)
		SLP_ARPES_DrawkLine(RotPlaneNo)
		
		If (str2num(SLP_ARPES_ScanListW[DataRow][22])) 
			//Setaxis /W=SLP_ARPES_Panel_01#Ek_ARPES /A/R left
			Setaxis /W=SLP_ARPES_Panel_01#Ek_ARPES /A/R left
			Label /W=SLP_ARPES_Panel_01#Ek_ARPES left, "Binding energy (eV)"
		Else
			Setaxis /W=SLP_ARPES_Panel_01#Ek_ARPES /A left
			Label /W=SLP_ARPES_Panel_01#Ek_ARPES left, "STV (eV)"
		EndIf
	EndIf
	If (!Exists(ARPESW_FName+"_Evk_HiSym_W"))
		SLP_Util_RemoveAllImages("SLP_ARPES_Panel_01#HiSym_ARPES")
	Else
		SLP_Util_RemoveAllImages("SLP_ARPES_Panel_01#HiSym_ARPES")
		String ColorTab=SLP_ARPES_ScanListW[DataRow][8]
		String Name_List=SLP_ARPES_ScanListW[DataRow][54]
		String line_p_List=SLP_ARPES_ScanListW[DataRow][55]
		//SLP_ARPES_HiSym_Plot(ARPESW_FName+"_Evk_HiSym_W","SLP_ARPES_Panel_01#HiSym_ARPES",Name_List,line_p_List,MinInt,MaxInt,ColorTab)
		AppendImage /W=SLP_ARPES_Panel_01#HiSym_ARPES $(ARPESW_FName+"_Evk_HiSym_W")
		String ImageName=StringFromList(0,ImageNameList("SLP_ARPES_Panel_01#HiSym_ARPES",";"),";")
		SetAxis /W=SLP_ARPES_Panel_01#HiSym_ARPES /A left
		modifyImage /W=SLP_ARPES_Panel_01#HiSym_ARPES $(ImageName),ctab={MinInt,MaxInt,$(ColorTab),0}
		
		SLP_ARPES_HiSym_Label(ARPESW_FName+"_Evk_HiSym_W","SLP_ARPES_Panel_01#HiSym_ARPES",Name_List,line_p_List)
	
		If (str2num(SLP_ARPES_ScanListW[DataRow][22])) 
			Setaxis /W=SLP_ARPES_Panel_01#HiSym_ARPES /A/R left
			Label /W=SLP_ARPES_Panel_01#HiSym_ARPES left, "Binding energy (eV)"
		Else
			Setaxis /W=SLP_ARPES_Panel_01#HiSym_ARPES /A left
			Label /W=SLP_ARPES_Panel_01#HiSym_ARPES left, "STV (eV)"
		EndIf
	
	EndIf
		//axis
	
//	If (str2num(SLP_ARPES_ScanListW[DataRow][22])) 
//		//Setaxis /W=SLP_ARPES_Panel_01#Ek_ARPES /A/R left
//		Setaxis /W=SLP_ARPES_Panel_01#Ek_ARPES /A/R left
//		Label /W=SLP_ARPES_Panel_01#Ek_ARPES left, "Binding energy (eV)"
//		Setaxis /W=SLP_ARPES_Panel_01#HiSym_ARPES /A/R left
//		Label /W=SLP_ARPES_Panel_01#HiSym_ARPES left, "Binding energy (eV)"
//	Else
//		Setaxis /W=SLP_ARPES_Panel_01#Ek_ARPES /A left
//		Label /W=SLP_ARPES_Panel_01#Ek_ARPES left, "STV (eV)"
//		Setaxis /W=SLP_ARPES_Panel_01#HiSym_ARPES /A left
//		Label /W=SLP_ARPES_Panel_01#HiSym_ARPES left, "STV (eV)"
//	EndIf
	
	
	If (str2num(SLP_ARPES_ScanListW[DataRow][23])) 
		Label /W=SLP_ARPES_Panel_01#Ek_ARPES bottom, "k (A\S-1\M)"
		Label /W=SLP_ARPES_Panel_01#HiSym_ARPES bottom, "k (A\S-1\M)"
	Else
		Label /W=SLP_ARPES_Panel_01#Ek_ARPES bottom, "Pixel"
		Label /W=SLP_ARPES_Panel_01#HiSym_ARPES bottom, "Pixel"
	EndIf
	
End

Function SLP_ARPES_DelScan()
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Wave /T SLP_ARPES_ScanListDispW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispW
	Wave SLP_ARPES_ScanListDispSelW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispSelW
	
	String ScanName=SLP_ARPES_ScanListW[SelRow][0]
	String PromptStr="Are you sure that you want to delete: "+ScanName
	Variable FinalRowSelect
	Doalert 1,PromptStr
	If (V_flag==1) //If 'Confirm'
		If (dimsize(SLP_ARPES_ScanListW,0)==1)
			//If this is the last data
			SLP_Util_RemoveAllImages("SLP_ARPES_Panel_01#Raw_ARPES")
			SLP_Util_RemoveAllImages("SLP_ARPES_Panel_01#EK_ARPES")
			
			FinalRowSelect=-1
		ElseIf(SelRow<dimsize(SLP_ARPES_ScanListW,0)-1)
			//If the row to delete is not the bottom one - Select the next one
			SLP_ARPES_DisplaySelectedData(SelRow+1)
			FinalRowSelect=SelRow
		Elseif (SelRow==dimsize(SLP_ARPES_ScanListW,0)-1) //If the last image is to be deleted
			//If the row to delete is the bottom one - Select the row just above
			SLP_ARPES_DisplaySelectedData(SelRow-1)
			FinalRowSelect=SelRow-1
		Endif
		
		String DataFolder_FName=SLP_ARPES_ScanListW[SelRow][1]
		killDataFolder /Z $DataFolder_FName
		variable DeleteScanError_Flg=V_Flag
		
		if (DeleteScanError_Flg==0) 
			//Only update ScanListW if Image folder can be deleted
			DeletePoints SelRow,1, SLP_ARPES_ScanListW
			DeletePoints SelRow,1, SLP_ARPES_ScanListDispW
			DeletePoints SelRow,1, SLP_ARPES_ScanListDispSelW
		Endif
	Endif
	
	ListBox list_ScanList, SelRow=FinalRowSelect,win=SLP_ARPES_Panel_01
	
	Return DeleteScanError_Flg

End

Function SLP_ARPES_Setkaxis(Option)
	//MODIFIED: 26.01.2021 - include HiSym
	variable Option //0 = just use pixel no., 1 = use A-1
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable  SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
//	Variable CenterX=str2num(SLP_ARPES_ScanListW[SelRow][16])
//	Variable CenterY=str2num(SLP_ARPES_ScanListW[SelRow][17])
//	Variable CircumfX=str2num(SLP_ARPES_ScanListW[SelRow][18])
//	Variable CircumfY=str2num(SLP_ARPES_ScanListW[SelRow][19])
	Variable kMax=str2num(SLP_ARPES_ScanListW[SelRow][24])
	Variable pPixSize=str2num(SLP_ARPES_ScanListW[SelRow][40])
	Variable qPixSize=str2num(SLP_ARPES_ScanListW[SelRow][41])
	Variable AvgPixSize=(pPixSize+qPixSize)/2
	
	String ARPES_W_Name=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_W_FName=SLP_ARPES_ScanListW[SelRow][1]+ARPES_W_Name
	String ARPES_Rot_W_FName=ARPES_W_FName+"_Evk_Vol"
	String ARPES_HiSym_W_FName=ARPES_W_FName+"_Evk_HiSym_W"
	Wave ARPES_Rot_W=$ARPES_Rot_W_FName
	
	If (Option==1)
		Setscale /P x,0,AvgPixSize,ARPES_Rot_W
		If (Exists(ARPES_HiSym_W_FName)) //[MODIFIED: 26.01.2021]
			Wave ARPES_HiSym_W=$ARPES_HiSym_W_FName
			Setscale /P x,0,AvgPixSize,ARPES_HiSym_W
		EndIf
	Else
		Setscale /P x,0,1,ARPES_Rot_W
		If (Exists(ARPES_HiSym_W_FName)) //[MODIFIED: 26.01.2021]
			Wave ARPES_HiSym_W=$ARPES_HiSym_W_FName
			Setscale /P x,0,1,ARPES_HiSym_W
		EndIf
	Endif
End

Function SLP_ARPES_SetEaxis(Option)
	//MODIFIED: 26.01.2021
	
	variable Option //0 = just use pixel no., 1 = use B.E.
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable  SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Variable STVstart=str2num(SLP_ARPES_ScanListW[SelRow][11])
	Variable STVstep=str2num(SLP_ARPES_ScanListW[SelRow][13])
	Variable hv=str2num(SLP_ARPES_ScanListW[SelRow][14])
	Variable aWF=str2num(SLP_ARPES_ScanListW[SelRow][15])
	
	String ARPES_W_Name=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_W_FName=SLP_ARPES_ScanListW[SelRow][1]+ARPES_W_Name
	String ARPES_Rot_W_FName=ARPES_W_FName+"_Evk_Vol"
	String ARPES_HiSym_W_FName=ARPES_W_FName+"_Evk_HiSym_W"
	Wave ARPES_Vol=$ARPES_W_FName
	Wave ARPES_Rot_W=$ARPES_Rot_W_FName
	
	If (Option==1)
		Variable BEstart=hv-aWF-STVstart
		Variable BEstep=-1*STVstep
		Setscale /P y,BEstart,BEstep,ARPES_Rot_W
		If (Exists(ARPES_HiSym_W_FName))
			Wave ARPES_HiSym_W=$ARPES_HiSym_W_FName
			Setscale /P y,BEstart,BEstep,ARPES_HiSym_W
		EndIf
	Else
		Setscale /P y,dimoffset(ARPES_Vol,2),dimdelta(ARPES_Vol,2),ARPES_Rot_W //[MODIFIED: 26.01.2021]
		If (Exists(ARPES_HiSym_W_FName))
			Wave ARPES_HiSym_W=$ARPES_HiSym_W_FName
			Setscale /P y,dimoffset(ARPES_Vol,2),dimdelta(ARPES_Vol,2),ARPES_HiSym_W
		EndIf
	Endif
End


Function CheckProc_ARPES(cba) : CheckBoxControl
	//MODIFIED: 26.01.2021
	
	STRUCT WMCheckboxAction &cba
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			strswitch(cba.CtrlName)	// string switch
				case "check_Eaxis":
					SLP_ARPES_ScanListW[SelRow][22]=num2str(checked)
					SLP_ARPES_SetEaxis(checked)
					SLP_ARPES_DisplaySelectedData(SelRow)
					break
				case "check_kaxis":
					SLP_ARPES_ScanListW[SelRow][23]=num2str(checked)
					SLP_ARPES_Setkaxis(checked)
					SLP_ARPES_DisplaySelectedData(SelRow)
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_ARPES_HiSym_Label(ARPES_Evk_HiSym_W_FName,WindowName,Name_List,line_p_List)
	//CREATED: 24.01.2021
	//DESCRIPTIONs: Label hi-symmetry points in the HiSym plot

	String ARPES_Evk_HiSym_W_FName,WindowName,Name_List,line_p_List
	
	Wave ARPES_Evk_HiSym_W=$ARPES_Evk_HiSym_W_FName
	String ImageName=StringFromList(0,ImageNameList(WindowName,";"),";")
	ModifyGraph /W=$(WindowName) margin(top)=25
	
	//Plot and label high-symmetry points
	Variable line_p=0
	Variable i=0
	For (i=0;i<itemsinlist(line_p_List,";");i+=1)
		line_p+=str2num(StringFromList(i,line_p_List,";"))
		SetDrawEnv /W=$WindowName xcoord=bottom,ycoord=left,linethick=2,linefgc=(65535,0,0)
		DrawLine /W=$WindowName Indextoscale(ARPES_Evk_HiSym_W,line_p,0),Indextoscale(ARPES_Evk_HiSym_W,dimsize(ARPES_Evk_HiSym_W,1)-1,1),Indextoscale(ARPES_Evk_HiSym_W,line_p,0),Indextoscale(ARPES_Evk_HiSym_W,dimsize(ARPES_Evk_HiSym_W,1)-10,1)
		SetDrawEnv /W=$WindowName xcoord=bottom,ycoord=left,fSize=16,textrgb=(0,0,0),fName="Times New Roman"
		DrawText /W=$WindowName Indextoscale(ARPES_Evk_HiSym_W,line_p,0),Indextoscale(ARPES_Evk_HiSym_W,dimsize(ARPES_Evk_HiSym_W,1),1),stringfromlist(i,Name_List,";")
	EndFor 
End

Function ButtonProc_ARPES(ba) : ButtonControl
	//MODIFIED: 26.01.2021
	STRUCT WMButtonAction &ba
	
	Variable SelRow
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	
	String DataName
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				case "button_LoadScan":	
					SLP_ARPES_LoadScan()
					break
				case "Button_DeleteScan":
					SLP_ARPES_DelScan()
					break
				case "Button_CreateRotARPES":
					SLP_ARPES_CreateNewARPESVol()
					break
				case "button_ExpBrowse":		// execute if case matches expression
					SVAR Exp_Directory=root:Package_SLP:ARPES:Export_Directory
					GetFileFolderInfo /D/Q
					Exp_Directory=S_Path					
					break
				case "Button_Export":
					SLP_ARPES_ExportData()
					break
				case "Button_Done":
					DoWindow /K SLP_ARPES_Panel_01
					break
				case "Button_SliderLimit": //[Added 20.01.2021]
					NVAR IntSlider_Min=root:Package_SLP:ARPES:IntSlider_Min
					NVAR IntSlider_Max=root:Package_SLP:ARPES:IntSlider_Max
					NVAR IntSlider_Step=root:Package_SLP:ARPES:IntSlider_Step
					Variable IntSlider_Min_LocalV=IntSlider_Min
					Variable IntSlider_Max_LocalV=IntSlider_Max
					Variable IntSlider_Step_LocalV=IntSlider_Step
					Prompt IntSlider_Min_LocalV,"Minimum intensity"
					Prompt IntSlider_Max_LocalV,"Max intensity"
					Prompt IntSlider_Step_LocalV,"Intensity step"
					DoPrompt "Modify intensity sliders",IntSlider_Min_LocalV,IntSlider_Max_LocalV,IntSlider_Step_LocalV
					IntSlider_Min=IntSlider_Min_LocalV
					IntSlider_Max=IntSlider_Max_LocalV
					IntSlider_Step=IntSlider_Step_LocalV
					Slider Slider_MinInt,limits={IntSlider_Min,IntSlider_Max,IntSlider_Step}
					Slider Slider_MaxInt,limits={IntSlider_Min,IntSlider_Max,IntSlider_Step}
					Break
				case "Button_SmoothVol":
					String SmoothPoints="3"
					Prompt SmoothPoints,"Select number of points",popup,"3;5;7;9"
					DoPrompt "Smoothing",SmoothPoints
					If (V_Flag==0) //User click 'Continue" //BUG: V_Value -> V_Flag Corrected on 20210208a.ipf
						Wave ARPES_Vol=$(SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0])
						ImageFilter /O/N=(str2num(SmoothPoints)) median3d ARPES_Vol 
						//ImageFilter works like MatrixFilter but good for 3d vol waves		
					EndIf
					Break
				case "Button_RestoreRawData":
					ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
					SelRow=V_Value
					Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
					
					SLP_Util_LoadMultImg2Vol(SLP_ARPES_ScanListW[SelRow][2],SLP_ARPES_ScanListW[SelRow][1]+SLP_ARPES_ScanListW[SelRow][0],Str2num(SLP_ARPES_ScanListW[SelRow][11]),Str2num(SLP_ARPES_ScanListW[SelRow][13]))
					Break
				case "Button_ResetZoom":
					SetAxis /W=SLP_ARPES_Panel_01#RAW_ARPES /A/R left
					SetAxis /W=SLP_ARPES_Panel_01#RAW_ARPES /A bottom
					Break
				case "Button_LoadScreen":
					CreateBrowser prompt="Select a bright image that filled the whole MCP screen", showWaves=1, showVars=0, showStrs=0
					String ImgScreenW_FName=""
					if(V_Flag!=0)
						ImgScreenW_FName=stringfromlist(0,S_BrowserList)
						SLP_Util_AutoFindScreen(ImgScreenW_FName,ImgScreenW_FName+"_Scrn")
						String ScreenW_FName=ImgScreenW_FName+"_Scrn"
						String PosList=Note($ScreenW_FName)
						Variable Screen_pMin=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"xMin")),":")) 
						Variable Screen_pMax=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"xMax")),":")) 
						Variable Screen_qMin=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"yMin")),":")) 
						Variable Screen_qMax=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"yMax")),":")) 
						
						SLP_ARPES_ScanListW[SelRow][36]=num2str(Screen_pMin)
						SLP_ARPES_ScanListW[SelRow][37]=num2str(Screen_pMax)
						SLP_ARPES_ScanListW[SelRow][38]=num2str(Screen_qMin)
						SLP_ARPES_ScanListW[SelRow][39]=num2str(Screen_qMax)
						
						SLP_ARPES_DrawScreenFrame()
						SLP_ARPES_CalcPxSize()
					EndIf
					Break
				case "Button_kSetScale":
					Variable p00=pcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES")
					Variable q00=qcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES")
					Prompt p00,"Center point (p)"
					Prompt q00,"Center point (q)"
					Doprompt "Enter (0,0) position (point)",p00,q00
					If (V_Flag==0)
						SLP_ARPES_SetScaleRaw(p00,q00)
						SLP_ARPES_DrawScreenFrame()
					EndIf
					Break
				case "Button_HighSym1CursorA":
					SLP_ARPES_ScanListW[SelRow][43]=num2str(pcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][44]=num2str(qcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym1CursorB":
					SLP_ARPES_ScanListW[SelRow][43]=num2str(pcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][44]=num2str(qcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym2CursorA":
					SLP_ARPES_ScanListW[SelRow][46]=num2str(pcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][47]=num2str(qcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym2CursorB":
					SLP_ARPES_ScanListW[SelRow][46]=num2str(pcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][47]=num2str(qcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym3CursorA":
					SLP_ARPES_ScanListW[SelRow][49]=num2str(pcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][50]=num2str(qcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym3CursorB":
					SLP_ARPES_ScanListW[SelRow][49]=num2str(pcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][50]=num2str(qcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym4CursorA":
					SLP_ARPES_ScanListW[SelRow][52]=num2str(pcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][53]=num2str(qcsr(A,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_HighSym4CursorB":
					SLP_ARPES_ScanListW[SelRow][52]=num2str(pcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					SLP_ARPES_ScanListW[SelRow][53]=num2str(qcsr(B,"SLP_ARPES_Panel_01#RAW_ARPES"))
					Break
				case "Button_CreateHiSymARPES":
					SLP_ARPES_kHighSymmetry()
					SLP_ARPES_DisplaySelectedData(SelRow)
					Break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_ARPES_ExportData()
	//MODIFIED: 26.01.2021
	
	ControlInfo /W=SLP_ARPES_Panel_01 check_Exp_ARPES_Survey
	Variable SurveyExport_Flg=V_Value
	ControlInfo /W=SLP_ARPES_Panel_01 check_Exp_ARPES_HiSym
	Variable HiSymeExport_Flg=V_Value
	
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	
	ControlInfo /W=SLP_ARPES_Panel_01 popup_ExpFileType 
	String ExpType=S_Value
	
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	Wave /T SLP_ARPES_ScanListDispW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispW
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	variable SelRow=V_Value
	
	SVAR Export_Directory=root:Package_SLP:ARPES:Export_Directory
	SVAR Export_BaseName=root:Package_SLP:ARPES:Export_BaseName
	NVAR Export_count=root:Package_SLP:ARPES:Export_count
		
	String Exp_Name
	sprintf Exp_Name,"%s_%03d",Export_BaseName,Export_count
	String PanelName_Survey=cleanupname(Exp_Name,0)+"_Survey"
	print PanelName_Survey
	String PanelName_HiSym=cleanupname(Exp_Name,0)+"_HiSym"
	print PanelName_HiSym
	
	String ARPES_W_Name=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_W_FName=SLP_ARPES_ScanListW[SelRow][1]+ARPES_W_Name
	String ARPES_Rot_W_FName=ARPES_W_FName+"_Evk_Vol"
	String ARPES_HiSym_W_FName=ARPES_W_FName+"_Evk_HiSym_W"
	Wave ARPES_W=$ARPES_W_FName
	Wave ARPES_Rot_W=$ARPES_Rot_W_FName
	Wave ARPES_HiSym_W=$ARPES_HiSym_W_FName
	
	string ARPESNote="\\Z10"+SLP_ARPES_ScanListDispW[SelRow][2]+"\rScan: "+ARPES_W_Name
	
	//[MODIFIED: 21.01.2021] - Create a 2D slice from EvK volume and store it in an Export folder (under root).
	NewDataFolder $("root:"+Exp_Name)
	Variable Rot_plane_no=str2num(SLP_ARPES_ScanListW[SelRow][21])
	Variable Ey_Flg=str2num(SLP_ARPES_ScanListW[SelRow][22])
	Variable kx_Flg=str2num(SLP_ARPES_ScanListW[SelRow][23])
	ControlInfo /W=SLP_ARPES_Panel_01 check_ExpAddNote
	Variable AddNote_Flg=V_Value
	Variable MinInt=str2num(SLP_ARPES_ScanListW[SelRow][6])
	Variable MaxInt=str2num(SLP_ARPES_ScanListW[SelRow][7])
	String ColorTab=SLP_ARPES_ScanListW[SelRow][8]
	
	If (SurveyExport_Flg)
		Duplicate /R=[][][Rot_plane_no] ARPES_Rot_W,$("root:"+Exp_Name+":"+Exp_Name+"_Survey") /Wave=ExportImgW
		Note ExportImgW,("Exported from: "+ARPES_Rot_W_FName+"\r"+date()+"\r"+time())
		Redimension /N=(dimsize(ExportImgW,0),dimsize(ExportImgW,1)) ExportImgW
		SLP_ARPES_PlotEvK(PanelName_Survey,"root:"+Exp_Name+":"+Exp_Name+"_Survey",Exp_Name+"_Survey",Ey_Flg,kx_Flg,AddNote_Flg,ExpType,Export_Directory,MinInt,MaxInt,ColorTab,ARPESNote)
		SLP_ARPES_SaveImageFile(PanelName_Survey,Export_Directory,ExpType)
	EndIf
	
	IF (HiSymeExport_Flg)
		Duplicate ARPES_HiSym_W,$("root:"+Exp_Name+":"+Exp_Name+"_HiSym") /Wave=ExportImgW
		Note ExportImgW,("Exported from: "+ARPES_HiSym_W_FName+"\r"+date()+"\r"+time())
		SLP_ARPES_PlotEvK(PanelName_HiSym,"root:"+Exp_Name+":"+Exp_Name+"_HiSym",Exp_Name+"_HiSym",Ey_Flg,kx_Flg,AddNote_Flg,ExpType,Export_Directory,MinInt,MaxInt,ColorTab,ARPESNote)
		String Name_List=SLP_ARPES_ScanListW[SelRow][54]
		String line_p_List=SLP_ARPES_ScanListW[SelRow][55]
		SLP_ARPES_HiSym_Label(ARPES_HiSym_W_FName,Exp_Name+"_HiSym",Name_List,line_p_List)
		SLP_ARPES_SaveImageFile(PanelName_HiSym,Export_Directory,ExpType)
	EndIf
	Export_count+=1
End

Function SLP_ARPES_PlotEvK(PanelName,ExportImgW_FName,Exp_Name,Ey_Flg,kx_Flg,AddNote_Flg,ExpType,Export_Directory,MinInt,MaxInt,ColorTab,ExportNote)
	//CREATED: 24.01.2021
	//DESCRIPTIONs: Plot E vs. k ARPES data
	String PanelName,ExportImgW_FName,Exp_Name,ExpType,Export_Directory,ExportNote,ColorTab
	Variable Ey_Flg,kx_Flg,AddNote_Flg,MinInt,MaxInt
	//Wave ARPES_W=$(ARPES_W_FName)
	Wave ExportImgW=$ExportImgW_FName
	
	Display /N=$PanelName /W=(200,50,600,400)
	
	AppendImage /W=$PanelName ExportImgW
	ModifyImage /W=$PanelName $(Exp_Name),ctab={MinInt,MaxInt,$ColorTab,0}
	//ModifyImage /W=$PanelName $(Exp_Name),plane=(str2num(SLP_ARPES_ScanListW[SelRow][21]))	
	ModifyGraph /W=$PanelName tick=2,mirror=1,minor=1,fSize=14
	ModifyGraph /W=$PanelName lblMargin(left)=14,lblMargin(bottom)=7,standoff=0
	ModifyGraph /W=$PanelName lblPos(left)=61,lblPos(bottom)=42
	ModifyGraph /W=$PanelName lblLatPos(left)=2,lblLatPos(bottom)=20
	
	//axis
	//E as y axis flag
	If (Ey_Flg) 
		Setaxis /W=$PanelName /A/R left
		Label /W=$PanelName left, "Binding energy (eV)"
	Else
		Setaxis /W=$PanelName /A left
		Label /W=$PanelName left, "STV (eV)"
	EndIf
	//k as x axis flag
	If (kx_Flg) 
		Label /W=$PanelName bottom, "k (A\S-1\M)"
	Else
		Label /W=$PanelName bottom, "Pixel"
	EndIf	
	If (AddNote_Flg)
		ModifyGraph /W=$PanelName lblPosMode(bottom)=4,lblPos(bottom)=30
		Modifygraph /W=$PanelName margin(bottom)=80
		Textbox /E=1/A=MB/W=$PanelName/X=1/Y=1/F=0 ExportNote
	EndIf
End

Function SLP_ARPES_SaveImageFile(PanelName,Export_Directory,ExpType)
	//CREATED: 25.01.2021
	//DESCRIPTIONs: Save Igor plots into a selected file format in computer
	
	String PanelName,Export_Directory,ExpType
	NewPath ARPESExpPath,Export_Directory
	strswitch(ExpType)	// string switch
		case "JPEG":		// execute if case matches expression
			SavePICT /Win=$PanelName /P=ARPESExpPath /E=-6/B=288 as PanelName+".jpg"
			DoWindow /K $PanelName
			break	
		case "TIFF":		// execute if case matches expression
			SavePICT /Win=$PanelName /P=ARPESExpPath /E=-7/B=288 as PanelName+".tif"
			DoWindow /K $PanelName
			break
		case "PDF":		// execute if case matches expression
			SavePICT /Win=$PanelName /P=ARPESExpPath as PanelName+".pdf"
			DoWindow /K $PanelName
			break						// exit from switch
		case "Igor graph":		// execute if case matches expression
			break						// exit from switch
	endswitch
	KillPath /A
End

Function SLP_ARPES_ExtractPE(Binning,CursorName)
	//CREATED: 21.01.2021
	//DESCRIPTIONs: extract photoemission data from the cursor 
	//					(for testing but not used now. This may be used for smoothing/highlighting Ek dispersion)
	Variable Binning
	String CursorName
	Variable ExtPoint_p=pCsr($CursorName,"SLP_ARPES_Panel_01#RAW_ARPES")
	Variable ExtPoint_q=qCsr($CursorName,"SLP_ARPES_Panel_01#RAW_ARPES")
	
	variable SelRow
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	//Find the image name (should be the same as ImgVol name) [TODO: proper use = Image name..]
	String DataSetName=SLP_ARPES_ScanListW[SelRow][0] 
	String DataSetFolder=SLP_ARPES_ScanListW[SelRow][1] 
	Wave DataW=$(DataSetFolder+DataSetName)
	Make /O/N=(Dimsize(DataW,2)) $(DataSetFolder+DataSetName+"_PE") /Wave=PE_W
	Variable i,j,k
	PE_W=0
	For (i=ExtPoint_p-(Binning-1);i<=ExtPoint_p+(Binning-1);i+=1)
		For (j=ExtPoint_q-(Binning-1);j<=ExtPoint_q+(Binning-1);j+=1)
			If (i>=0 && i<dimsize(DataW,0) && j>=0 && j<dimsize(DataW,1))
				PE_W[]=PE_W[p]+DataW[i][j][p]
				k+=1
			EndIF
		EndFor
	EndFor
	PE_W/=k
	
End

Function SLP_ARPES_LoadScan()
	//[MODIFIED: 21.01.2021] - Read photon energy from .txt file during loading
	//[MODIFIED: 08.02.2021] - Auto copy screen pos (pmin,pmax,qmin,qmax) from previous scan.
	GetFileFolderInfo /D/Q/Z=2 //[Note] /Z=2 prevent dialog when user click 'Cancel'
	If (V_Flag!=-1) //IF user select a folder
		NewPath DataPath,S_Path
		
		Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
		Wave /T SLP_ARPES_ScanListDispW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispW
		Wave SLP_ARPES_ScanListDispSelW=root:Package_SLP:ARPES:SLP_ARPES_ScanListDispSelW
		
		variable STVStart
		variable STVStep
		variable hv
		Variable OBJ
		
		variable ExitFlg=0
		
		//Auto assign VolName to the folder name
		String VolName=StringFromList(ItemsInList(S_Path,":")-1,S_Path,":") //Suggested name = (data-containing) folder name
		VolName=CleanupName(VolName,0)
		
		//Automatic search for parameter from the text file
		string FileList1=indexedfile(DataPath,-1,".txt")
		If (Strlen(FileList1)) 		//If .txt file is found..
			String ParamFile_Name=stringfromlist(0,indexedfile(DataPath,-1,".txt"),";")
			String ParamFile_FName=S_Path+ParamFile_Name
			string ParamList=SLP_Util_ExtScanParam(File_FName=ParamFile_FName)
			STVStart=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Start")),":"))
			STVStep=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Step")),":"))
			hv=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"Photon Energy")),":"))
			OBJ=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"OBJ")),":"))
		EndIf
				
		//Prompt for Wavename and other parameters
		Prompt VolName, "Wave name"
		prompt STVStart, "Start voltage begin (eV)"
		prompt STVStep, "Start voltage step (eV)"
		prompt hv,"Photon energy (eV)"
		prompt OBJ,"Objective lens (mA)"
		DoPrompt "Enter parameters", VolName,STVStart,STVStep,hv
		//V_Flag = 1 after DoPrompt if users click 'Cancel'
		Variable kMax=SLP_UTIL_Calculate_kMax(OBJ)
		
		If (!V_Flag)
			Do
				If (!Stringmatch(VolName,CleanUpName(VolName,0))||datafolderexists("root:Package_SLP:ARPES:"+VolName)) //Check if name is legal. CheckName returns 0 if it is ok.
					doalert 1,"Illegal or duplicated scan name. Do you want to choose a new scan name?"
					if (V_flag==2) //If users don't want to continue
						Return 0 //Exit
					Else
						Prompt VolName, "Wave name"
						DoPrompt "Enter a new name", VolName
						If (V_Flag)
							Return 0 //Exit
						EndIf
					EndIf	
				Endif
			
			While (!Stringmatch(VolName,CleanUpName(VolName,0))||datafolderexists("root:Package_SLP:ARPES:"+VolName))
											
			string CurrentFolder=GetDataFolder(1)
			string PkgFolder_FName="root:Package_SLP:ARPES:"+VolName
			NewDataFolder $PkgFolder_FName //Location in Pkg Folder to store scan parameters
			SetDataFolder $PkgFolder_FName //Save raw data here
			
			//Load series of images to a 3d volume [CODE:SLP_Util_LoadMultImg2Vol]
			SLP_Util_LoadMultImg2Vol(S_Path,VolName,STVStart,STVStep)
										
			string NewImgVolW_FName=PkgFolder_FName+":"+VolName 
			Wave NewImgVolW=$NewImgVolW_FName
										
			//Find no. of step
			variable N_Steps=dimsize(NewImgVolW,2)
										
			//Add new scan to the list
			variable N_Scans=Dimsize(SLP_ARPES_ScanListW,0)
			redimension /N=(dimsize(SLP_ARPES_ScanListW,0)+1,dimsize(SLP_ARPES_ScanListW,1)) SLP_ARPES_ScanListW
			redimension /N=(dimsize(SLP_ARPES_ScanListDispW,0)+1,dimsize(SLP_ARPES_ScanListDispW,1)) SLP_ARPES_ScanListDispW
			redimension /N=(dimsize(SLP_ARPES_ScanListDispSelW,0)+1,dimsize(SLP_ARPES_ScanListDispSelW,1)) SLP_ARPES_ScanListDispSelW
			
			//Scan list display wave [MODIFIED: ce20210208a.ipf - Move up so and change SelRow in ListBox List_ScanList]
			SLP_ARPES_ScanListDispW[N_Scans][1]=VolName
			SLP_ARPES_ScanListDispW[N_Scans][3]=num2str(OBJ)
			SLP_ARPES_ScanListDispSelW[N_Scans][0]=32
			SLP_ARPES_ScanListDispSelW[N_Scans][2]=2							
																				
			//Make selection in the ScanList
			ListBox List_ScanList, SelRow=dimsize(SLP_ARPES_ScanListW,0)-1
			
			//Initialize the parameters in ScanListW
			SLP_ARPES_ScanListW[N_Scans][0]=VolName //Name of the scan (= wave name)
			SLP_ARPES_ScanListW[N_Scans][1]=PkgFolder_FName+":" //Where the Raw file is saved
			SLP_ARPES_ScanListW[N_Scans][2]=S_Path //The raw data directory on the computer
			SLP_ARPES_ScanListW[N_Scans][3]=secs2date(V_modificationDate,2)+" "+secs2time(V_modificationDate,2)
			SLP_ARPES_ScanListW[N_Scans][4]=secs2date(V_creationDate,2)+" "+secs2time(V_creationDate,2)
			SLP_ARPES_ScanListW[N_Scans][5]="0" //SelFrame
			
			SLP_ARPES_ScanListW[N_Scans][6]="1500"
			SLP_ARPES_ScanListW[N_Scans][7]="2500"
			SLP_ARPES_ScanListW[N_Scans][8]="Terrain"
			SLP_ARPES_ScanListW[N_Scans][9]=num2str(OBJ)
			SLP_ARPES_ScanListW[N_Scans][10]=num2str(kMax)
			
			SLP_ARPES_ScanListW[N_Scans][11]=num2str(STVStart)
			SLP_ARPES_ScanListW[N_Scans][12]=num2str(STVStart+(N_steps-1)*STVStep)
			SLP_ARPES_ScanListW[N_Scans][13]=num2str(STVStep)
			SLP_ARPES_ScanListW[N_Scans][14]=num2str(hv)
			SLP_ARPES_ScanListW[N_Scans][15]="0" //aWF
			
			//Center kx,ky
			SLP_ARPES_ScanListW[N_Scans][16]=num2str(floor(dimsize(NewImgVolW,0)/2))
			SLP_ARPES_ScanListW[N_Scans][17]=num2str(floor(dimsize(NewImgVolW,1)/2))
			//Circumference kx,ky
			SLP_ARPES_ScanListW[N_Scans][18]=num2str(floor(dimsize(NewImgVolW,0)/2))
			SLP_ARPES_ScanListW[N_Scans][19]=num2str(floor(dimsize(NewImgVolW,1)*7/8))
			//Number of slice around the rotation axis
			SLP_ARPES_ScanListW[N_Scans][20]="180"
			//Sel. Rot. Plane
			SLP_ARPES_ScanListW[N_Scans][21]="0"
			//E and k axis
			SLP_ARPES_ScanListW[N_Scans][22]="0" //E
			SLP_ARPES_ScanListW[N_Scans][23]="0" //k
			SLP_ARPES_ScanListW[N_Scans][24]="0.1" //kMax
			
			//Cursor color (default = 0,0,0 = black)
			SLP_ARPES_ScanListW[N_Scans][27]="0" //R
			SLP_ARPES_ScanListW[N_Scans][28]="0" //G
			SLP_ARPES_ScanListW[N_Scans][29]="0" //B
			
			//Screen pos (check from Previous scan) [MODIFIED: ce20210208a.ipf]
			If (N_Scans>0) //If this is not the 1st scan
				If (!StringMatch(SLP_ARPES_ScanListW[N_Scans-1][36],"")) //If screen pos is already defined
					SLP_ARPES_ScanListW[N_Scans][36]=SLP_ARPES_ScanListW[N_Scans-1][36]
					SLP_ARPES_ScanListW[N_Scans][37]=SLP_ARPES_ScanListW[N_Scans-1][37]
					SLP_ARPES_ScanListW[N_Scans][38]=SLP_ARPES_ScanListW[N_Scans-1][38]
					SLP_ARPES_ScanListW[N_Scans][39]=SLP_ARPES_ScanListW[N_Scans-1][39]
					SLP_ARPES_DrawScreenFrame()
					SLP_ARPES_CalcPxSize()
				EndIf
			EndIf
					
			
			SLP_ARPES_ScanListW[N_Scans][42]="M"
			SLP_ARPES_ScanListW[N_Scans][45]="Γ"
			SLP_ARPES_ScanListW[N_Scans][48]="K"
			SLP_ARPES_ScanListW[N_Scans][51]="M"
			
			
										
			//Selected frame number = 0
			NVAR FrameNum=root:Package_SLP:ARPES:FrameNum
			FrameNum=0
			
			SLP_ARPES_DisplaySelectedData(N_Scans)

			SetDataFolder $CurrentFolder
			SLP_Util_PlayAlert()
		EndIf
	EndIf
	Killpath /a
End

Function SLP_ARPES_kHighSymmetry()
	//CREATED: 24.01.2021
	//DESCRIPTIONs: Create a high-symmetry direction E-k maps from RAW ARPES data. Use 3D interpolate function of Igor.
	
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	variable SelRow=V_Value
	
	String ARPES_W_Name=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_W_FName=SLP_ARPES_ScanListW[SelRow][1]+ARPES_W_Name
	Variable pStart,pEnd
	Variable qStart,qEnd
	Variable EStart=str2num(SLP_ARPES_ScanListW[SelRow][11])
	Variable EStep=str2num(SLP_ARPES_ScanListW[SelRow][13])
	Variable MinInt=str2num(SLP_ARPES_ScanListW[SelRow][6])
	Variable MaxInt=str2num(SLP_ARPES_ScanListW[SelRow][7])
	Variable pPixSize=str2num(SLP_ARPES_ScanListW[SelRow][40])
	Variable qPixSize=str2num(SLP_ARPES_ScanListW[SelRow][41])
	Variable avgPixSize=(pPixSize+qPixSize)/2
	//Create a list of p,q Start/End
	Variable i
	String Name_List=""
	String p_List=""
	String q_List=""
	//String kSize_List=""
	String line_p_List="0;"
	Variable N_Points
	For (i=42;i<=51;i+=3)
		If (!StringMatch(SLP_ARPES_ScanListW[SelRow][i],"")) //If name of a high-symmetry point is not blank
			Name_List+=SLP_ARPES_ScanListW[SelRow][i]+";"
			p_List+=SLP_ARPES_ScanListW[SelRow][i+1]+";"
			q_List+=SLP_ARPES_ScanListW[SelRow][i+2]+";"
		EndIf
	EndFor
	
	For (i=0;i<itemsinlist(p_List,";")-1;i+=1)
		pStart=str2num(stringfromlist(i,p_List,";"))
		qStart=str2num(stringfromlist(i,q_List,";"))
		pEnd=str2num(stringfromlist(i+1,p_List,";"))
		qEnd=str2num(stringfromlist(i+1,q_List,";"))
		SLP_ARPES_kPlane(ARPES_W_FName,pStart,qStart,pEnd,qEnd,Estart,Estep)
		Wave Evk_W=$(ARPES_W_FName+"_Evk_W")
		line_p_List+=num2str(dimsize(Evk_W,0))+";" //Size in pixel
		
		If (i==0)
			Duplicate /O Evk_W,$(ARPES_W_FName+"_Evk_hiSym_W") /Wave=Evk_hiSym_W
		Else
			Concatenate /NP=0 {Evk_W},Evk_hiSym_W
		EndIf
	EndFor
	
	SetScale /P x,0,avgPixSize,Evk_hiSym_W //[MODIFIED: 26.01.2021]
	
	SLP_ARPES_SetEaxis(str2num(SLP_ARPES_ScanListW[SelRow][22]))
	
	Note Evk_hiSym_W, "Symmetry points: "+Name_List+"\rp points: "+p_List+"\rq points: "+q_List+"\rMarker positions: "+line_p_List
	SLP_ARPES_ScanListW[SelRow][54]=Name_List
	SLP_ARPES_ScanListW[SelRow][55]=line_p_List
	
End


Function SLP_ARPES_kPlane(ARPES_W_FName,pStart,qStart,pEnd,qEnd,Estart,Estep)
	//CREATED: 22.01.2021
	//DESCRIPTIONs: Create a 2D image of an E-k plane selected by Start and End (k) pixels in RAW ARPES volume. 
	String ARPES_W_FName
	Variable pStart,qStart,pEnd,qEnd,Estart,Estep
	
	Wave ARPES_Vol=$ARPES_W_FName
	Variable kRange=floor(sqrt((pStart-pEnd)^2+(qStart-qEnd)^2))
	variable ERange=dimsize(ARPES_Vol,2)
	Make /O/N=(kRange,ERange) $(ARPES_W_FName+"_Evk_W") /Wave=EvK_W
	SetScale /P y,dimoffset(ARPES_Vol,2),dimdelta(ARPES_Vol,2),EvK_W //[MODIFIED: 26.01.2021]
	variable i,j
	variable kx,ky,E
	Variable Theta
	If (pEnd-pStart==0) //[MODIFIED: 21.01.2021] - This is to prevent 'atan(inf)=inf'
		If (qEnd-qStart>0)
			Theta=pi/2
		ElseIf (qEnd-qStart<0)
			Theta=-1*pi/2
		EndIf
	ElseIf (pEnd-pStart>0)
		Theta=atan((qEnd-qStart)/(pEnd-pStart)) //in rad.
	ElseIf (pEnd-pStart<0)
		Theta=atan((qEnd-qStart)/(pEnd-pStart))+pi //in rad.
	EndIf
	For (i=0;i<kRange;i+=1)
			//[MODIFIED - 22.01.2021]
			kx=IndextoScale(ARPES_Vol,pStart+i*cos(Theta),0)
			ky=IndextoScale(ARPES_Vol,qStart+i*sin(Theta),1)
			
			For (j=0;j<ERange;j+=1)
				E=Estart+j*Estep
				EvK_W[i][j]=Interp3D(ARPES_Vol,kx,ky,E)
			Endfor
		EndFor
End

Function SLP_ARPES_kRotation(ARPES_W_FName,pCenter,qCenter,pCircumf,qCircumf,Estart,Estep,N_Theta)
	//MODIFIED: 22.01.2021
	
	String ARPES_W_FName
	Variable pCenter,qCenter,pCircumf,qCircumf,Estart,Estep,N_Theta
	Wave ARPES_Vol=$ARPES_W_FName
	
	//Calculate kRange (to make 2D k-space image for each angle) (**not real k unit, just use pixel unit for now)
	variable kRange=floor(2*sqrt((pCircumf-pCenter)^2+(qCircumf-qCenter)^2))
	variable ERange=dimsize(ARPES_Vol,2)
	//Make /O/N=(kRange,ERange) root:Package_SLP:ARPES:Evk_W /Wave=EvK_W
	//Make /O/N=(kRange,ERange,N_Theta) root:Package_SLP:ARPES:Evk_Vol /Wave=EvK_Vol
	Make /O/N=(kRange,ERange) $(ARPES_W_FName+"_Evk_W") /Wave=EvK_W
	Make /O/N=(kRange,ERange,N_Theta) $(ARPES_W_FName+"_Evk_Vol") /Wave=EvK_Vol
	SetScale /P y,dimoffset(ARPES_Vol,2),dimdelta(ARPES_Vol,2),EvK_Vol //[MODIFIED: 26.01.2021]
	
	variable i,j,k
	variable kx_pos,ky_pos,kx_neg,ky_neg,E
	variable Theta0
	If (pCircumf-pCenter==0) //[MODIFIED: 21.01.2021] - This is to prevent 'atan(inf)=inf'
		If (qCircumf-qCenter>0)
			Theta0=pi/2
		ElseIf (qCircumf-qCenter<0)
			Theta0=-1*pi/2
		EndIf
	ElseIf (pCircumf-pCenter>0)
		Theta0=atan((qCircumf-qCenter)/(pCircumf-pCenter)) //in rad.
	ElseIf (pCircumf-pCenter<0)
		Theta0=atan((qCircumf-qCenter)/(pCircumf-pCenter))+pi //in rad.
	EndIf
	
	Variable Theta=0
	For (k=0;k<N_Theta;k+=1)
		Theta=Theta0+2*pi/N_Theta*k
		For (i=0;i<kRange/2;i+=1)
			//[MODIFIED - 22.01.2021]
			kx_pos=IndextoScale(ARPES_Vol,pCenter+i*cos(Theta),0)
			ky_pos=IndextoScale(ARPES_Vol,qCenter+i*sin(Theta),1)
			kx_neg=IndextoScale(ARPES_Vol,pCenter-i*cos(Theta),0)
			ky_neg=IndextoScale(ARPES_Vol,qCenter-i*sin(Theta),1)
			
			For (j=0;j<ERange;j+=1)
				E=Estart+j*Estep
				EvK_W[floor(dimsize(EvK_W,0)/2)+i][j]=Interp3D(ARPES_Vol, kx_pos, ky_pos,E)
				EvK_W[floor(dimsize(EvK_W,0)/2)-i][j]=Interp3D(ARPES_Vol, kx_neg, ky_neg,E)
			Endfor
		EndFor
		EvK_Vol[][][k]=EvK_W[p][q]
	EndFor
	
End



Function SLP_ARPES_CreateNewARPESVol() //E v kxky dispersion volume with  rotating k space
	//MODIFIED: 22.01.2021 - Use p and q instead of x an y for notation (it's actual points and not x-y that are stored in ScanListW)
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	variable SelRow=V_Value
	
	String ARPES_W_Name=SLP_ARPES_ScanListW[SelRow][0]
	String ARPES_W_FName=SLP_ARPES_ScanListW[SelRow][1]+ARPES_W_Name
	Variable pCenter=str2num(SLP_ARPES_ScanListW[SelRow][16])
	Variable qCenter=str2num(SLP_ARPES_ScanListW[SelRow][17])
	Variable pCircumf=str2num(SLP_ARPES_ScanListW[SelRow][18])
	Variable qCircumf=str2num(SLP_ARPES_ScanListW[SelRow][19])
	Variable EStart=str2num(SLP_ARPES_ScanListW[SelRow][11])
	Variable EStep=str2num(SLP_ARPES_ScanListW[SelRow][13])
	Variable N_Theta=str2num(SLP_ARPES_ScanListW[SelRow][20])
	
	Prompt N_Theta,"Number of angles"
	DoPrompt "Enter parameters",N_Theta
	
	SLP_ARPES_ScanListW[SelRow][20]=num2str(N_Theta)
	
	//Record the coordinates in ScanListW
	SLP_ARPES_ScanListW[SelRow][32]=num2str(pCenter)
	SLP_ARPES_ScanListW[SelRow][33]=num2str(qCenter)
	SLP_ARPES_ScanListW[SelRow][34]=num2str(pCircumf)
	SLP_ARPES_ScanListW[SelRow][35]=num2str(qCircumf)
	
	SLP_ARPES_kRotation(ARPES_W_FName,pCenter,qCenter,pCircumf,qCircumf,Estart,Estep,N_Theta)
	SLP_ARPES_DisplaySelectedData(SelRow)
	//Cursor /I/W=SLP_ARPES_Panel_01#Raw_ARPES C,$(ARPES_W_Name),xCenter,yCenter
End

Function SLP_ARPES_CursorHook(s) 
	//HOOK FUNCTION to determine (kx,ky) by moving a cursor

	STRUCT WMWinHookStruct &s

	Variable hookResult = 0

		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_ARPES_Panel_01 activeSW
				String activeSubwindow = S_value
				
				Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
				ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
				variable SelRow=V_Value
				
				//Hook for Center kx,ky
				if (CmpStr(activeSubwindow,"SLP_ARPES_Panel_01#Raw_ARPES") == 0&&!stringmatch("",CsrInfo(A,"SLP_ARPES_Panel_01#Raw_ARPES")))
					SLP_ARPES_ScanListW[SelRow][16]=num2str(pcsr(A,"SLP_ARPES_Panel_01#Raw_ARPES"))
					SLP_ARPES_ScanListW[SelRow][17]=num2str(qcsr(A,"SLP_ARPES_Panel_01#Raw_ARPES"))
				Endif
				//Hook for Circumference kx,ky
				if (CmpStr(activeSubwindow,"SLP_ARPES_Panel_01#Raw_ARPES") == 0&&!stringmatch("",CsrInfo(B,"SLP_ARPES_Panel_01#Raw_ARPES")))
					SLP_ARPES_ScanListW[SelRow][18]=num2str(pcsr(B,"SLP_ARPES_Panel_01#Raw_ARPES"))
					SLP_ARPES_ScanListW[SelRow][19]=num2str(qcsr(B,"SLP_ARPES_Panel_01#Raw_ARPES"))
				Endif
				
				
				break
		endswitch

	return hookResult		// 0 if nothing done, else 1
End



//Module: Set Image Scale
//Set scale for an image wave.

Function Panel_SetImageScale() : Panel
	//CREATED: 01.09.2020
	//DESCRIPTIONs: Create a panel for user to change the scaling of image waves in Igor from the calibrated scale of the MCP screen
	//		- User need to find screen first. The panel use AutoFindScreen function to help with this. 
	//			*User should use full LEEM image with good brightness to find the screen. Do this first for an image that has been captured at about the same time as the one for scaling
	//			*(e.g. using LEED patten doesn't work). For images taken at different time, there is a chance that the camera positions are not the same.
	//		- User can set either real-space (um) or reciprocal space (A-1) and put the unit in the wave scaling
	//		- User can set the (0,0) point to the upper-left corner, middle of the screen or anywhere in the image
	//		- User can make measurements (length, angle) and export the number to a plot, .jpg or .pdf files.

	//Initialize if not yet done
	If (!DataFolderExists("root:Package_SLP:Util:SetImgScale"))
		SLP_Util_SetImgScale_Init()
	EndIf
	SVAR ImgW_FName=root:Package_SLP:Util:SetImgScale:ImgW_FName
	SVAR ScreenW_FName=root:Package_SLP:Util:SetImgScale:ScreenW_FName
	NVAR ShowScreenArea_Flg=root:Package_SLP:Util:SetImgScale:ShowScreenArea_Flg
	NVAR ScreenMinX=root:Package_SLP:Util:SetImgScale:ScreenMinX
	NVAR ScreenMaxX=root:Package_SLP:Util:SetImgScale:ScreenMaxX
	NVAR ScreenMinY=root:Package_SLP:Util:SetImgScale:ScreenMinY
	NVAR ScreenMaxY=root:Package_SLP:Util:SetImgScale:ScreenMaxY
	NVAR ScreenRefX=root:Package_SLP:Util:SetImgScale:ScreenRefX
	NVAR ScreenRefY=root:Package_SLP:Util:SetImgScale:ScreenRefY
	NVAR ScreenSize=root:Package_SLP:Util:SetImgScale:ScreenSize
	NVAR AB_Distance=root:Package_SLP:Util:SetImgScale:AB_Distance
	NVAR AB_Angle=root:Package_SLP:Util:SetImgScale:AB_Angle
	
	//Create the panel
	DoWindow /K SLP_SetImageScale_Panel_01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(137,114,838,643) /N=SLP_SetImageScale_Panel_01
	ShowInfo/W=$WinName(0,64)
	
	SetDrawLayer /W=SLP_SetImageScale_Panel_01 UserBack
	SetDrawEnv /W=SLP_SetImageScale_Panel_01 fsize= 16
	DrawText /W=SLP_SetImageScale_Panel_01 17,27,"SLPA Set Image Scale"
	
	SetDrawEnv fillpat= 0
	DrawRRect 466,101,689,171
	
	Wave LeftLine_xW=root:Package_SLP:Util:SetImgScale:LeftLine_xW
	Wave LeftLine_yW=root:Package_SLP:Util:SetImgScale:LeftLine_yW
	Wave RightLine_xW=root:Package_SLP:Util:SetImgScale:RightLine_xW
	Wave RightLine_yW=root:Package_SLP:Util:SetImgScale:RightLine_yW
	Wave TopLine_xW=root:Package_SLP:Util:SetImgScale:TopLine_xW
	Wave TopLine_yW=root:Package_SLP:Util:SetImgScale:TopLine_yW
	Wave BottomLine_xW=root:Package_SLP:Util:SetImgScale:BottomLine_xW
	Wave BottomLine_xyW=root:Package_SLP:Util:SetImgScale:BottomLine_xyW
	Wave DummyImgW=root:Package_SLP:Util:SetImgScale:DummyImgW
	
	//Image display
	Display /N=ImgW /W=(8,71,454,524)/HOST=SLP_SetImageScale_Panel_01 /R/T LeftLine_yW vs LeftLine_xW
	AppendToGraph /W=SLP_SetImageScale_Panel_01#ImgW /R/T RightLine_yW vs RightLine_xW
	AppendToGraph /W=SLP_SetImageScale_Panel_01#ImgW /R/T TopLine_yW vs TopLine_xW
	AppendToGraph /W=SLP_SetImageScale_Panel_01#ImgW /R/T BottomLine_xyW vs BottomLine_xW
	
	If (StringMatch(ImgW_FName,""))
		Wave ImgW=root:Package_SLP:Util:SetImgScale:DummyImgW
	Else
		Wave ImgW=$ImgW_FName
	EndIf
	AppendImage /W=SLP_SetImageScale_Panel_01#ImgW /G=1 ImgW
	
	ModifyGraph margin=47,wbRGB=(61166,61166,61166)
	ModifyGraph mirror=0,minor=1,fSize=11
	Label right "Pixel(y)"
	Label top "Pixel(x)"
	Label left "Pos(y)"
	Label bottom "Pos(x)"
	
	SetAxis /W=SLP_SetImageScale_Panel_01#ImgW /R right dimsize(ImgW,1)-1,0 //Note: 0 is on the top
	SetAxis /W=SLP_SetImageScale_Panel_01#ImgW top 0,dimsize(ImgW,0)-1
	SetAxis/A/R left
	SetAxis/A bottom
	
	//Image wave and screen wave names
	SetVariable setvar_ImgW_FName,pos={14.00,30.00},size={370.00,14.00},title="\\f01Image wave full name:"
	SetVariable setvar_ImgW_FName,value= root:Package_SLP:Util:SetImgScale:ImgW_FName,noedit= 1
	SetVariable setvar_ScreenW_FName,pos={14.00,48.00},size={370.00,14.00},title="\\f01Screen wave full name:"
	SetVariable setvar_ScreenW_FName,value= root:Package_SLP:Util:SetImgScale:ScreenW_FName,noedit= 1
	
	//Buttons to load image and screen waves
	Button button_SelectImgW,pos={393.00,30.00},size={150.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Select image wave"
	Button button_SelectImgW,fSize=11
	Button button_SelectScreen,pos={393.00,48.00},size={150.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Select screen wave"
	Button button_SelectScreen,fSize=11
	//Button to create a screen wave from an image
	Button button_CreateScreenW,pos={547.00,48.00},size={150.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Create screen wave.."
	Button button_CreateScreenW,fSize=11
	//Button to reset zoom (after user uses zoom in the image)
	Button button_ResetZoom,pos={547.00,30.00},size={150.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Reset zoom"
	Button button_ResetZoom,fSize=11,fColor=(1,9611,39321)
	
	//SCREEN
	SetDrawEnv /W=SLP_SetImageScale_Panel_01 fsize= 14
	DrawText /W=SLP_SetImageScale_Panel_01 462,98,"Screen"
	
	SetVariable setvar_xMin,pos={485.00,128.00},size={80.00,14.00},title="xMin (px)"
	SetVariable setvar_xMin,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ScreenMinX,noedit= 1
	SetVariable setvar_xMax,pos={587.00,128.00},size={80.00,14.00},title="xMax (px)"
	SetVariable setvar_xMax,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ScreenMaxX,noedit= 1
	SetVariable setvar_yMin,pos={545.00,106.00},size={80.00,14.00},title="yMin (px)"
	SetVariable setvar_yMin,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ScreenMinY,noedit= 1
	SetVariable setvar_yMax,pos={544.00,151.00},size={80.00,14.00},title="yMax (px)"
	SetVariable setvar_yMax,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ScreenMaxY,noedit= 1
	
	SetVariable setvar_ScreenSize,pos={468.00,179.00},size={140.00,18.00},title="Screen size"
	SetVariable setvar_ScreenSize,fSize=12,valueColor=(61166,61166,61166)
	SetVariable setvar_ScreenSize,valueBackColor=(16385,28398,65535)
	SetVariable setvar_ScreenSize,limits={0,inf,1},value= root:Package_SLP:Util:SetImgScale:ScreenSize
	
	PopupMenu popup_Unit,pos={611.00,179.00},size={69.00,23.00},title="Unit"
	PopupMenu popup_Unit,mode=1,popvalue="μm",value= #"\"μm;Å-1;None\""
	
	//(0,0) reference point
	SetDrawEnv /W=SLP_SetImageScale_Panel_01 fsize= 14
	DrawText /W=SLP_SetImageScale_Panel_01 462,226,"Center point"
	
	SetVariable setvar_xCenter,pos={477.00,229.00},size={90.00,14.00},title="xCenter (px)"
	SetVariable setvar_xCenter,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ScreenRefX,noedit= 1
	SetVariable setvar_yCenter,pos={584.00,229.00},size={90.00,14.00},title="yCenter (px)"
	SetVariable setvar_yCenter,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ScreenRefY,noedit= 1
	
	Button button_SetCenter,pos={491.00,250.00},size={180.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Set (0,0) to screen center"
	Button button_SetCenter,fSize=11
	Button button_SetTopLeft,pos={491.00,268.00},size={180.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Set (0,0) to top left of image"
	Button button_SetTopLeft,fSize=11
	Button button_PutCursorC,pos={491.00,287.00},size={180.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Put Cursor C"
	Button button_PutCursorC,fSize=11
	Button button_MoveCenter,pos={491.00,305.00},size={180.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Set (0,0) position to cursor C"
	Button button_MoveCenter,fSize=11
	Button button_RemoveCursorC,pos={491.00,324.00},size={180.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Remove cursor C"
	Button button_RemoveCursorC,fSize=11
	
	Button button_SetScale,pos={474.00,344.00},size={214.00,22.00},proc=ButtonProc_Util_SetImgScale,title="Set scale"
	Button button_SetScale,fSize=14,fColor=(1,9611,39321)
	
	//MEASUREMENTs and EXPORT
	SetDrawEnv /W=SLP_SetImageScale_Panel_01 fsize= 14
	DrawText /W=SLP_SetImageScale_Panel_01 462,396,"Measurements"
	SetDrawEnv /W=SLP_SetImageScale_Panel_01 fsize= 10
	DrawText /W=SLP_SetImageScale_Panel_01 598,433,"Export"
	
	Button button_AB_Cursors,pos={481.00,398.00},size={130.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Put A and B cursors"
	Button button_AB_Cursors,fSize=11
	Button button_Remove_AB_Cursors,pos={613.00,398.00},size={60.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Remove"
	Button button_Remove_AB_Cursors,fSize=11
	
	SetVariable setvar_AB_Distance,pos={470.00,435.00},size={130.00,14.00},title="A-B distance"
	SetVariable setvar_AB_Distance,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:AB_Distance,noedit= 1
	SetVariable setvar_AB_Angle,pos={470.00,450.00},size={130.00,14.00},title="A-B angle (deg.)"
	SetVariable setvar_AB_Angle,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:AB_Angle,noedit= 1
	CheckBox check_Distance,pos={608.00,432.00},size={15.00,16.00},title="",value= 0
	CheckBox check_Angle,pos={608.00,448.00},size={15.00,16.00},title="",value= 0
	
	CheckBox check_IgorPlot,pos={470.00,469.00},size={54.00,16.00},title="Igor plot",value=1
	CheckBox check_PDF,pos={537.00,469.00},size={35.00,16.00},title=".pdf",value=0
	CheckBox check_JPG,pos={586.00,469.00},size={33.00,16.00},title=".jpg",value=0
	CheckBox check_ScaleBar,pos={633.00,469.00},size={58.00,16.00},title="Scale bar",value=0
	
	SetVariable setvar_ExportName,pos={470.00,490.00},size={167.00,14.00},title="Export name"
	SetVariable setvar_ExportName,value= root:Package_SLP:Util:SetImgScale:ExportName
	SetVariable setvar_ExportIndex,pos={470.00,506.00},size={100.00,14.00},title="Export number:"
	SetVariable setvar_ExportIndex,limits={0,inf,0},value= root:Package_SLP:Util:SetImgScale:ExportIndex,noedit= 1

	Button button_Export,pos={642.00,488.00},size={50.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Export"
	Button button_Export,fSize=11
	
	Button button_Done,pos={642.00,507.00},size={50.00,16.00},proc=ButtonProc_Util_SetImgScale,title="Done"
	Button button_Done,fSize=11
	
//	CheckBox check_ScreenDisplay,pos={584.00,81.00},size={102.00,16.00},title="Show screen frame"
//	CheckBox check_ScreenDisplay,variable= root:Package_SLP:Util:SetImgScale:ShowScreenArea_Flg
	
	//Hook function
	setwindow SLP_SetImageScale_Panel_01,hook(DistanceUpdate)=SLP_Util_SetImgScale_CursorHook
End

Function SLP_Util_SetImgScale_Init()
	
	string Current_folder=getdatafolder(1)
	NewDataFolder /O root:Package_SLP:Util:SetImgScale
	SetDataFolder root:Package_SLP:Util:SetImgScale
	
	String /G ImgW_FName
	String /G ScreenW_FName
	String /G ExportName="ImgScaleExport"
	Variable /G ExportIndex=1
	Variable /G ScreenMinX
	Variable /G ScreenMaxX
	Variable /G ScreenMinY
	Variable /G ScreenMaxY
	Variable /G ScreenRefX
	Variable /G ScreenRefY
	Variable /G ScreenSizeRatio=1
	Variable /G ScreenSize=75
	Variable /G ShowScreenArea_Flg=1
	Variable /G AB_Distance
	Variable /G AB_Angle
	Make /O/N=(2,2) DummyImgW
//	Make /O/N=(1) DefaultScreenOutlineX
//	Make /O/N=(1) DefaultScreenOutlineY
	Make /O/N=2 LeftLine_xW
	Make /O/N=2 LeftLine_yW
	Make /O/N=2 RightLine_xW
	Make /O/N=2 RightLine_yW
	Make /O/N=2 TopLine_xW
	Make /O/N=2 TopLine_yW
	Make /O/N=2 BottomLine_xW
	Make /O/N=2 BottomLine_yW
	
	setdatafolder $Current_folder
End

Function SLP_Util_SetImgScale_CursorHook(s) 
//HOOK FUNCTION to display distance and angle

	STRUCT WMWinHookStruct &s

	Variable hookResult = 0
	
		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_SetImageScale_Panel_01 activeSW
				String activeSubwindow = S_value
				NVAR AB_Distance=root:Package_SLP:Util:SetImgScale:AB_Distance
				NVAR AB_Angle=root:Package_SLP:Util:SetImgScale:AB_Angle
				
				if (CmpStr(activeSubwindow,"SLP_SetImageScale_Panel_01#ImgW")== 0&&!stringmatch("",CsrInfo(A,"SLP_SetImageScale_Panel_01#ImgW")))
					Variable xA=hcsr(A,"SLP_SetImageScale_Panel_01#ImgW")
					Variable yA=vcsr(A,"SLP_SetImageScale_Panel_01#ImgW")
					Variable xB=hcsr(B,"SLP_SetImageScale_Panel_01#ImgW")
					Variable yB=vcsr(B,"SLP_SetImageScale_Panel_01#ImgW")
					
					AB_Distance=sqrt((xA-xB)^2+(yA-yB)^2)
					AB_Angle=(180/pi)*atan((yB-yA)/(xA-xB))
				Endif
				break
		endswitch

	return hookResult		// 0 if nothing done, else 1
End

Function ButtonProc_Util_SetImgScale(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	//DESCRIPTIONs: Button proc for SetImgScale panel
	//		Most of the functionalities for SetImgScale module are in this function
	//CREATED: 01.09.2020
	
	SVAR ImgW_FName=root:Package_SLP:Util:SetImgScale:ImgW_FName
	SVAR ScreenW_FName=root:Package_SLP:Util:SetImgScale:ScreenW_FName
	NVAR ShowScreenArea_Flg=root:Package_SLP:Util:SetImgScale:ShowScreenArea_Flg
	NVAR ScreenMinX=root:Package_SLP:Util:SetImgScale:ScreenMinX
	NVAR ScreenMaxX=root:Package_SLP:Util:SetImgScale:ScreenMaxX
	NVAR ScreenMinY=root:Package_SLP:Util:SetImgScale:ScreenMinY
	NVAR ScreenMaxY=root:Package_SLP:Util:SetImgScale:ScreenMaxY
	NVAR ScreenRefX=root:Package_SLP:Util:SetImgScale:ScreenRefX
	NVAR ScreenRefY=root:Package_SLP:Util:SetImgScale:ScreenRefY
	NVAR ScreenSize=root:Package_SLP:Util:SetImgScale:ScreenSize
	NVAR AB_Distance=root:Package_SLP:Util:SetImgScale:AB_Distance
	NVAR AB_Angle=root:Package_SLP:Util:SetImgScale:AB_Angle
	Wave LeftLine_xW=root:Package_SLP:Util:SetImgScale:LeftLine_xW
	Wave LeftLine_yW=root:Package_SLP:Util:SetImgScale:LeftLine_yW
	Wave RightLine_xW=root:Package_SLP:Util:SetImgScale:RightLine_xW
	Wave RightLine_yW=root:Package_SLP:Util:SetImgScale:RightLine_yW
	Wave TopLine_xW=root:Package_SLP:Util:SetImgScale:TopLine_xW
	Wave TopLine_yW=root:Package_SLP:Util:SetImgScale:TopLine_yW
	Wave BottomLine_xW=root:Package_SLP:Util:SetImgScale:BottomLine_xW
	Wave BottomLine_yW=root:Package_SLP:Util:SetImgScale:BottomLine_xyW
	
	If (StringMatch(ImgW_FName,""))
		Wave ImgW=root:Package_SLP:Util:SetImgScale:DummyImgW
	Else
		Wave ImgW=$ImgW_FName
	EndIf
	
	String PosList=""
	String ImgName=""
	Variable ScreenWidth=0
	Variable ScreenHeight=0
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			StrSwitch(ba.CtrlName)
				Case "button_SelectImgW": //Choose img wave to set scale
					CreateBrowser prompt="Select image wave to set scale", showWaves=1, showVars=0, showStrs=0
					if(V_Flag!=0)
						ImgW_FName=stringfromlist(0,S_BrowserList)
					endif
					SLP_Util_AddnRmTraces("SLP_SetImageScale_Panel_01#ImgW",ImgW_FName,1)
					Break
				Case "button_CreateScreenW": //Create screen outline from a good full image that fills the MCP screen
					CreateBrowser prompt="Select image wave to find screen", showWaves=1, showVars=0, showStrs=0
					String ImgScreenW_FName=""
					if(V_Flag!=0)
						ImgScreenW_FName=stringfromlist(0,S_BrowserList)
						SLP_Util_AutoFindScreen(ImgScreenW_FName,ImgScreenW_FName+"_Scrn")
						ScreenW_FName=ImgScreenW_FName+"_Scrn"
						PosList=Note($ScreenW_FName)
						ScreenMinX=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"xMin")),":")) 
						ScreenMaxX=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"xMax")),":")) 
						ScreenMinY=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"yMin")),":")) 
						ScreenMaxY=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"yMax")),":")) 
						LeftLine_xW={ScreenMinX,ScreenMinX}
						LeftLine_yW={ScreenMinY,ScreenMaxY}
						RightLine_xW={ScreenMaxX,ScreenMaxX}
						RightLine_yW={ScreenMinY,ScreenMaxY}
						TopLine_xW={ScreenMinX,ScreenMaxX}
						TopLine_yW={ScreenMinY,ScreenMinY}
						BottomLine_xW={ScreenMinX,ScreenMaxX}
						BottomLine_yW={ScreenMaxY,ScreenMaxY}
						SetAxis /W=SLP_SetImageScale_Panel_01#ImgW /R right dimsize(ImgW,1)-1,0 //Note: 0 is on the top
						SetAxis /W=SLP_SetImageScale_Panel_01#ImgW top 0,dimsize(ImgW,0)-1
					endif
					Break
				Case "button_SelectScreen": //Select screen wave that has been created by AutoCreateScreen function (reads xMin,xMax,yMin,yMax from wave notes)
					CreateBrowser prompt="Select screen wave", showWaves=1, showVars=0, showStrs=0
					if(V_Flag!=0)
						ScreenW_FName=stringfromlist(0,S_BrowserList)
						PosList=Note($ScreenW_FName)
						ScreenMinX=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"xMin")),":")) 
						ScreenMaxX=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"xMax")),":")) 
						ScreenMinY=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"yMin")),":")) 
						ScreenMaxY=str2num(stringfromlist(1,stringfromlist(0,grepList(PosList,"yMax")),":")) 
						LeftLine_xW={ScreenMinX,ScreenMinX}
						LeftLine_yW={ScreenMinY,ScreenMaxY}
						RightLine_xW={ScreenMaxX,ScreenMaxX}
						RightLine_yW={ScreenMinY,ScreenMaxY}
						TopLine_xW={ScreenMinX,ScreenMaxX}
						TopLine_yW={ScreenMinY,ScreenMinY}
						BottomLine_xW={ScreenMinX,ScreenMaxX}
						BottomLine_yW={ScreenMaxY,ScreenMaxY}
		
						SetAxis /W=SLP_SetImageScale_Panel_01#ImgW right dimsize($ScreenW_FName,1)-1,0
						SetAxis /W=SLP_SetImageScale_Panel_01#ImgW top 0,dimsize($ScreenW_FName,0)-1
					EndIf
					Break
				Case "button_ResetZoom": //Back to full image after user zooms in the image plot
					SetAxis /W=SLP_SetImageScale_Panel_01#ImgW /A/R left
					SetAxis /W=SLP_SetImageScale_Panel_01#ImgW /A bottom
					SetAxis /W=SLP_SetImageScale_Panel_01#ImgW right dimsize($ScreenW_FName,1)-1,0
					SetAxis /W=SLP_SetImageScale_Panel_01#ImgW top 0,dimsize($ScreenW_FName,0)-1
					Break
				Case "button_SetCenter": //Set (0,0) to the center of the screen
					ImgName=StringFromList(0,ImageNameList("SLP_SetImageScale_Panel_01#ImgW",";"),";")
					Wave ImgW=$ImgW_FName
					ScreenRefX=Round((ScreenMinX+ScreenMaxX)/2)
					ScreenRefY=Round((ScreenMinY+ScreenMaxY)/2)
					Cursor /C=(65535,0,0)/P/I/W=SLP_SetImageScale_Panel_01#ImgW C $ImgName ScreenRefX,ScreenRefY
					//Note: /P = use pixel number instead of x,y
					Break
				Case "button_SetTopLeft": //Set (0,0) to the top-left corner
					ImgName=StringFromList(0,ImageNameList("SLP_SetImageScale_Panel_01#ImgW",";"),";")
					Wave ImgW=$ImgW_FName
					ScreenRefX=0
					ScreenRefY=0
					Cursor /P/I/W=SLP_SetImageScale_Panel_01#ImgW C $ImgName ScreenRefX,ScreenRefY
					//Note: /P = use pixel number instead of x,y
					Break
				Case "button_PutCursorC": //Put cursor C on the image so that user can choose (0,0) position
					ImgName=StringFromList(0,ImageNameList("SLP_SetImageScale_Panel_01#ImgW",";"),";")
					Wave ImgW=$ImgW_FName
					//Cursor /I C $ImgName Round(Dimsize(ImgW,0)/2),Round(Dimsize(ImgW,1)/2)
					Cursor /P/I/W=SLP_SetImageScale_Panel_01#ImgW/C=(65535,0,0) C $ImgName ScreenRefX,ScreenRefY
					Break
				Case "button_MoveCenter": //Put (0,0) to where cursor C is
					ScreenRefX=pCsr(C,"SLP_SetImageScale_Panel_01#ImgW")
					ScreenRefY=qCsr(C,"SLP_SetImageScale_Panel_01#ImgW")
					Break
				Case "button_RemoveCursorC": //Clear cursor C from the image
					Cursor /K/W=SLP_SetImageScale_Panel_01#ImgW C
					Break
				Case "button_SetScale": //MAIN BUTTON: set image scale based on 'Screen Size' 
				//								(FOV for real space, and calibrated k value at the edge of the MCP screen for LEED
					Wave ImgW=$ImgW_FName
					ScreenWidth=ScreenMaxX-ScreenMinX
					ScreenHeight=ScreenMaxY-ScreenMinY
					Variable Distance_perPx_X=ScreenSize/ScreenWidth
					Variable Distance_perPx_Y=ScreenSize/ScreenHeight
					ControlInfo /W=SLP_SetImageScale_Panel_01 popup_Unit
					String UnitString=""
					Switch(V_Value)
						Case 1:
							UnitString="μm"
							Break
						Case 2:
							UnitString="Å\S-1"
							Break
					EndSwitch
					SetScale /P x,-ScreenRefX*Distance_perPx_X,Distance_perPx_X,UnitString,ImgW
					SetScale /P y,-ScreenRefY*Distance_perPx_Y,Distance_perPx_Y,UnitString,ImgW
					Break
				Case "button_AB_Cursors": //Put A and B cursors on the image for measurements
					Cursor /P/I/W=SLP_SetImageScale_Panel_01#ImgW/C=(65535,0,0) A $ImgName round(dimsize(ImgW,0)*0.5),round(dimsize(ImgW,1)*0.5)
					Cursor /P/I/W=SLP_SetImageScale_Panel_01#ImgW/C=(65535,0,0) B $ImgName round(dimsize(ImgW,0)*0.6),round(dimsize(ImgW,1)*0.5)
					Break
				Case "button_Remove_AB_Cursors": //Clear A and B cursors
					Cursor /K/W=SLP_SetImageScale_Panel_01#ImgW A 
					Cursor /K/W=SLP_SetImageScale_Panel_01#ImgW B 
					Break
				Case "button_Export": //Export the result measurement/scale bar to Igor plot, .pdf or .jpg files.
					ControlInfo /W=SLP_SetImageScale_Panel_01 check_Distance
					Variable ExportDistance_Flg=V_Value
					ControlInfo /W=SLP_SetImageScale_Panel_01 check_Angle
					Variable ExportAngle_Flg=V_Value
					ControlInfo /W=SLP_SetImageScale_Panel_01 check_IgorPlot
					Variable ExportPlot_Flg=V_Value
					ControlInfo /W=SLP_SetImageScale_Panel_01 check_PDF
					Variable ExportPDF_Flg=V_Value
					ControlInfo /W=SLP_SetImageScale_Panel_01 check_JPG
					Variable ExportJPG_Flg=V_Value
					ControlInfo /W=SLP_SetImageScale_Panel_01 check_ScaleBar
					Variable ExportScaleBar_Flg=V_Value
					
					SVAR ExportName=root:Package_SLP:Util:SetImgScale:ExportName
					NVAR ExportIndex=root:Package_SLP:Util:SetImgScale:ExportIndex
					String StrIndex
					sprintf StrIndex,"%03d",ExportIndex
					String ExportNameStr=ExportName+"_"+StrIndex
					String ExportNote="\Z11"+ExportNameStr
					If (!ExportScaleBar_Flg)
						NewImage /S=2 /N=$ExportNameStr ImgW
					Else
						NewImage /S=1 /N=$ExportNameStr ImgW
						Variable ScaleBar_Length=ScreenSize/5
						//Variable ScaleBar_LengthPx=round(ScaleBar_Length/dimdelta(ImgW,0))
						Variable ScaleBarX0=dimoffset(ImgW,0)+0.75*dimSize(ImgW,0)*dimDelta(ImgW,0)
						Variable ScaleBarX1=dimoffset(ImgW,0)+0.95*dimSize(ImgW,0)*dimDelta(ImgW,0)
						Variable ScaleBarY=dimoffset(ImgW,1)+0.9*dimSize(ImgW,1)*dimDelta(ImgW,1)
						setdrawenv xcoord=top,ycoord=left,linefgc=(65535,65535,65535),linethick=3
						drawline ScaleBarX0,ScaleBarY,ScaleBarX1,ScaleBarY
						Variable ScaleTextX=dimoffset(ImgW,0)+0.80*dimSize(ImgW,0)*dimDelta(ImgW,0)
						Variable ScaleTextY=dimoffset(ImgW,1)+0.95*dimSize(ImgW,1)*dimDelta(ImgW,1)
						setdrawenv xcoord=top,ycoord=left,TextRGB=(65535,65535,65535),fSize=16
						DrawText ScaleTextX,ScaleTextY,num2str(ScaleBar_Length)+" "+WaveUnits(ImgW,0)
					EndIf
					Variable xA=hcsr(A,"SLP_SetImageScale_Panel_01#ImgW")
					Variable yA=vcsr(A,"SLP_SetImageScale_Panel_01#ImgW")
					Variable xB=hcsr(B,"SLP_SetImageScale_Panel_01#ImgW")
					Variable yB=vcsr(B,"SLP_SetImageScale_Panel_01#ImgW")
					
					If (ExportDistance_Flg)
						ExportNote+="\rDistance: "+num2str(AB_Distance)+WaveUnits(ImgW,0)+"\Z11"
						setdrawenv xcoord=top,ycoord=left,linefgc=(65535,0,0),linethick=2
						drawline xA,yA,xB,yB
					EndIf
					If (ExportAngle_Flg)
						ExportNote+="\rAngle: "+num2str(AB_Angle)+"°\Z11"
					EndIf
					
					TextBox /X=1 /Y=1 ExportNote
					
					If (ExportPDF_Flg)
						SavePICT/E=-8/EF=2 //Embed font (special characters)
					EndIf
					If (ExportJPG_Flg)
						SavePICT/E=-6/B=288
					EndIf
					If (!ExportPlot_Flg)
						DoWindow /K $ExportNameStr
					EndIf
					ExportIndex+=1
					Break
				case "button_Done":
					Dowindow /K SLP_SetImageScale_Panel_01
					Break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_Util_AutoFindScreen(ImgW_FName,ResultW_FName)
	string ImgW_FName,ResultW_FName
	//MODIFIED: 31.08.2020 - Improve the algorithm
	//DESCRIPTIONs: Automatically creage screen wave (2D) by adjusting the threshold from the background
	//		level up until ImageAnalyzeParticle finds the PEEM's screen (assumed to be single large, circular object)
	//		*The screen wave has 1 for the screen area and NaN for the outside
	//		**a note is created to the screenwave telling xMin,xMax,yMin,yMax (in pixel)
	//			Use: note function and then "str2num(stringfromlist(1,stringfromlist(0,grepList(NOTE,"xMax")),":"))" 
	//			to get the numbers
	//		***The outline waves are created: root:Package_SLP:Util:AutoFindScreen:W_BoundaryX and :W_BoundaryY
	
	Wave ImgW=$ImgW_FName
	//Duplicate /O ImgW,$ResultW_FName /WAVE=ThW
	//Duplicate /O ImgW,$ResultW_FName /WAVE=ResultW
	
	NewDataFolder /O root:Package_SLP:Util:AutoFindScreen
	//Create diagonal line for line profile. This makes sure that we include area outside of the MCP screen.
	Make /O/N=2 root:Package_SLP:Util:AutoFindScreen:LP_xWave /Wave=LP_xWave
	Make /O/N=2 root:Package_SLP:Util:AutoFindScreen:LP_yWave /Wave=LP_yWave
	LP_xWave={0,dimsize(ImgW,0)-1}
	LP_yWave={0,dimsize(ImgW,1)-1}
	
	string Current_folder=getdatafolder(1)
	SetDataFolder root:Package_SLP:Util:AutoFindScreen //Change folder so that ImageLineProfile result is kept in this Util folder
	Duplicate /O ImgW,ImgW_nonScale //Note: Image wave must not have scaling for ImageLineProfile to work properly..
	SetScale /P x,0,1,ImgW_nonScale
	SetScale /P y,0,1,ImgW_nonScale
	ImageLineProfile /SC xWave=LP_xWave, yWave=LP_yWave, srcWave=ImgW_nonScale, Width=5
	
	Wave W_imageLineProfile
	
	Variable CameraBG_Level=(W_imageLineProfile[5]+W_imageLineProfile[dimsize(W_imageLineProfile,0)-6])/2
	Variable PeakInt=WaveMax(W_imageLineProfile)
	Variable Increment=(PeakInt-CameraBG_Level)/10
	Variable MinSize=dimsize(ImgW,0)*dimsize(ImgW,1)/3
	Variable Circularity=0
	Variable ThLevel=CameraBG_Level+Increment
	
	Do
	 	//SLP_ThIntv[0][1]=ThLevel
		//ImageThreshold /I/O/Q/W=SLP_ThIntv ResultW
		ImageThreshold /I/Q/T=(ThLevel) ImgW_nonScale
		Wave M_ImageThresh
		DoUpdate
		ImageAnalyzeParticles /E/W/Q/EBPC/M=3/A=(MinSize)/FILL stats, M_ImageThresh
		Wave W_circularity
		ThLevel+=Increment
		If (dimsize(W_circularity,0)>0)
			Circularity=W_circularity[0]
		EndIf
	While ((ThLevel<PeakInt)&&(V_NumParticles<1)&&(Circularity<0.95))
	
	Wave M_Particle
	Wave W_xmin
	Wave W_xmax
	Wave W_ymin
	Wave W_ymax
	
	Killwaves ImgW_nonScale
	SetDataFolder $Current_folder
	
	//Duplicate /O M_Particle,$ResultW_FName /Wave=ResultW
	//Create FP32 wave (M_Particle wave is I8 so NaN can't be used)
	Make /O/N=(dimsize(M_Particle,0),dimsize(M_Particle,1)) $ResultW_FName /Wave=ResultW
	ResultW=M_Particle
	MatrixOP /O ResultW=replace(ResultW,16,1)
	MatrixOP /O ResultW=replace(ResultW,18,1)
	MatrixOP /O ResultW=replace(ResultW,64,NaN)
	
	//Add notes (xMin,yMin,xMax,yMax)
	String ScreenNote="xMin:"+num2str(W_xmin[0])+";xMax:"+num2str(W_xmax[0])+";yMin:"+num2str(W_ymin[0])+";yMax:"+num2str(W_ymax[0])
	Note ResultW,ScreenNote
	
End

//MODULE: SLPA zProfile Cursor///
//Add a cursor hook to ImgVolW display to see z profile (spectrum) as user moves the cursor
//The module also adds Bin and Frame number selection

Function SLP_Util_zProfile_Init()
	//CREATED: 19.06.2020
	//DESCRIPTION: Initialization for zProfile Module
	string Current_folder=getdatafolder(1)
	
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:Util
	NewDataFolder /O root:Package_SLP:Util:zProfileHook
	SetDataFolder root:Package_SLP:Util:zProfileHook
	
	String /G zProfl_WindowName=""
	Variable /G zProfl_Bin=5
	String /G zProfl_CursorName="A"
	Variable /G zProfl_FrameNum=0
	SetDataFolder $Current_folder
End

Function SLP_Util_zProfile_ApplyCursorHook()
	//CREATED: 19.06.2020
	//DESCRIPTIONS: Put cursor hook to the top graph (has to be an image volume display)
	//						Users can drag or move the cursor (A) with mouse or keyboard to update the z-Profile display.
	//						The function creates a new plot, and puts Bin and Frame selection at the top of the display.
	//Initiailize zProfileHook module
	If (!DataFolderExists("root:Package_SLP:Util:zProfileHook"))
		SLP_Util_zProfile_Init()
	EndIf
	
	SVAR zProfl_WindowName=root:Package_SLP:Util:zProfileHook:zProfl_WindowName
	SVAR zProfl_CursorName=root:Package_SLP:Util:zProfileHook:zProfl_CursorName
	NVAR zProfl_Bin=root:Package_SLP:Util:zProfileHook:zProfl_Bin
	NVAR zProfl_FrameNum=root:Package_SLP:Util:zProfileHook:zProfl_FrameNum
	
	zProfl_WindowName=WinName(0,1) //Get the name of top graph window
	
	//**Apply hook function**
	setwindow $zProfl_WindowName,hook(zProfileUpdate)=SLP_Util_zProfile_CursorHook
	
	//Select frame number (from global variable)
	ModifyGraph /W=$zProfl_WindowName margin(top)=50
	
	//Title
	SetDrawLayer /W=$zProfl_WindowName Overlay
	DrawText /W=$zProfl_WindowName -0.01,-0.04,"\\Z20SLPA Display z Profile"
	
	//SetVar
	SetVariable setvar_Bin,pos={235,10},size={100.00,18.00},title="Bin",Win=$zProfl_WindowName
	SetVariable setvar_Bin,fSize=12,proc=SetVarProc_Util_zProfile,Win=$zProfl_WindowName
	SetVariable setvar_Bin,value= root:Package_SLP:Util:zProfileHook:zProfl_Bin,Win=$zProfl_WindowName
	
	SetVariable setvar_FrameNum,pos={365,10},size={100.00,18.00},proc=SetVarProc_Util_zProfile,title="Frame",Win=$zProfl_WindowName
	SetVariable setvar_FrameNum,fSize=12,Win=$zProfl_WindowName
	SetVariable setvar_FrameNum,value= root:Package_SLP:Util:zProfileHook:zProfl_FrameNum,Win=$zProfl_WindowName

	//Put cursor on (center of the image by default)
	String ImgVolW_Name=StringFromList(0,ImageNameList(zProfl_WindowName,";"))
	Wave VolW=ImageNameToWaveRef(zProfl_WindowName, ImgVolW_Name )
	Cursor /I $zProfl_CursorName  $ImgVolW_Name  dimsize(VolW,0)/2, dimsize(VolW,1)/2
	
	//Display zProfile in a new plot
	SLP_Util_ExtractZProfile_Cursor(zProfl_WindowName,zProfl_CursorName,zProfl_Bin,1)
	Modifyimage /W=$zProfl_WindowName $ImgVolW_Name plane=zProfl_FrameNum
	
End

Function SLP_Util_zProfile_CursorHook(s) 
	//CREATED: 19.06.2020
	//DESCRIPTIONS: HOOK FUNCTION to see spectrum at different (x,y) by moving a cursor

	STRUCT WMWinHookStruct &s

	Variable hookResult = 0
	SVAR zProfl_WindowName=root:Package_SLP:Util:zProfileHook:zProfl_WindowName
	SVAR zProfl_CursorName=root:Package_SLP:Util:zProfileHook:zProfl_CursorName
	NVAR zProfl_Bin=root:Package_SLP:Util:zProfileHook:zProfl_Bin
	
		switch(s.eventCode)
			case 7:				// Activate
				//Update zProfile as users move the cursor
				SLP_Util_ExtractZProfile_Cursor(zProfl_WindowName,zProfl_CursorName,zProfl_Bin,0)
				break
		endswitch
	return hookResult		// 0 if nothing done, else 1
End

Function SetVarProc_Util_zProfile(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva
	//CREATED: 19.06.2020
	//DESCRIPTIONS: SetVarProc for zProfile module

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			SVAR zProfl_WindowName=root:Package_SLP:Util:zProfileHook:zProfl_WindowName
			SVAR zProfl_CursorName=root:Package_SLP:Util:zProfileHook:zProfl_CursorName
			NVAR zProfl_Bin=root:Package_SLP:Util:zProfileHook:zProfl_Bin
			NVAR zProfl_FrameNum=root:Package_SLP:Util:zProfileHook:zProfl_FrameNum
			StrSwitch(sva.CtrlName)
				Case "SetVar_Bin": //Update zProfile as users change Bin
					SLP_Util_ExtractZProfile_Cursor(zProfl_WindowName,zProfl_CursorName,zProfl_Bin,0)
					break
				Case "setvar_FrameNum": //Update frame in the display
					String ImgVolW_Name=StringFromList(0,ImageNameList(zProfl_WindowName,";"))
					Modifyimage /W=$zProfl_WindowName $ImgVolW_Name plane=zProfl_FrameNum
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


//MODULE: NEX Multiscan Correct and Merge///
//When signal is low in NEXAFS (e.g. very thin layer), it may help to do multiple scans, then combine 
//and average the data to improve signal to noise ratio. There can be an energy drift during time the scans are made,
//especially when the grating still keeps warming up. The energy drift can be up to almost -2 eV for the first scan
//compared to the last scans after the temperatures of optical elements stabilize. The drift seems to be
//exponential (dE(time) = -A*exp(time/tau)).
//
//Interpolation is used instead of changing x (hv) waves so that user can combine and average the scans using the same hv steps.

Function SLP_NEX_MultiScans_init()
	//CREATED: 06.06.2020
	//DESCRIPTIONS: Initialize NEX MultiScans
	
	string Current_folder=getdatafolder(1)
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:NEXAFS
	NewDataFolder /O root:Package_SLP:NEXAFS:MultiScans
	NewDataFolder /O root:Package_SLP:NEXAFS:MultiScans:SavedCorrections
	SetDataFolder root:Package_SLP:NEXAFS:MultiScans
	
	Make /T/O/N=(0,16) NEXMulti_ScanListDispW
	Make /O/N=(0,16) NEXMulti_ScanListDispSelW
	SetDimLabel 1,0,Sel,NEXMulti_ScanListDispW
	SetDimLabel 1,1,ScanName,NEXMulti_ScanListDispW
	SetDimLabel 1,2,StartTime,NEXMulti_ScanListDispW
	SetDimLabel 1,3,Correction,NEXMulti_ScanListDispW
	SetDimLabel 1,4,CorrectionFit,NEXMulti_ScanListDispW
	SetDimLabel 1,14,RawDataFolder,NEXMulti_ScanListDispW
	SetDimLabel 1,15,IgorDataFolder,NEXMulti_ScanListDispW
	
	Make /O/N=0 CorrectionW
	Make /O/N=0 CorrectionW_Fitted
	Variable /G ROI_Sel=1
	Variable /G Correction_Step=0.1
	Variable /G Create_AvgData_Flg=1
	Variable /G Export_TiffStack_Flg=0
	Variable /G Keep_IndvScans_Flg=0
	Variable /G SendToNEXPanel_Flg=0
	Variable /G Create_AvgIzero_Flg=1
	Variable /G Keep_IndvIzero_Flg=0
	Variable /G Export_IzeroCSV_Flg=0
	String /G Export_Dest="root:"
	String /G COM_Dest
	String /G Panel_Notification
	
	SetDataFolder $Current_folder
End

Function Panel_NEX_MultiScans_CreatePanel() : Panel
	//DESCRIPTONS: Crate a panel for user to correct the energy drift and merge the multiple scans into an average data
	//					Called from the main NEXAFS panel.
	//CREATED: 06.2020
	
	//Initialize if not yet donw
	If (!DataFolderExists("root:Package_SLP:NEXAFS:MultiScans"))
		SLP_NEX_MultiScans_init()
	EndIf
	
	//Crate the panel
	DoWindow /K Panel_NEX_MultiScans
	NewPanel /W=(127,105,1187,581) /N=Panel_NEX_MultiScans
	
	PauseUpdate; Silent 1		// building window...
	SetDrawLayer UserBack
	DrawText 10,29,"\\Z20NEXAFS Multi-scan Correct and Merge"
	DrawText 784,53,"\\Z16Energy correction vs time"
	DrawText 369,356,"\\Z16Export options"
	
	//Import Izero and NEX scan curve (ROI 1 by default) for user to correct the energy
	SLP_NEX_MultiScans_Import()
	
	//Correction vs Time plot
	Wave NEXMulti_Correction_Manual=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
	Wave NEXMulti_Correction_Fitted=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Fitted
	Wave NEXMulti_Correction_Time=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Time
	
	Display/W=(783,55,1051,309)/HOST=Panel_NEX_MultiScans /N=CorrectionCurve  
	Appendtograph /W=Panel_NEX_MultiScans#CorrectionCurve  NEXMulti_Correction_Manual vs NEXMulti_Correction_Time
	AppendToGraph /W=Panel_NEX_MultiScans#CorrectionCurve NEXMulti_Correction_Fitted vs NEXMulti_Correction_Time
	ModifyGraph mode(NEXMulti_Correction_Manual)=3, marker(NEXMulti_Correction_Manual)=16,msize(NEXMulti_Correction_Manual)=3
	ModifyGraph mirror=1
	Label left "Correction (eV)"
	Label bottom "Time"
	Cursor/P A NEXMulti_Correction_Manual 14
	
	//Izero Plot
	Display/W=(8,36,357,221)/HOST=Panel_NEX_MultiScans /N=IzeroPlot
	//ROI Plot
	Display/W=(8,247,355,448)/HOST=Panel_NEX_MultiScans /N=ROIPlot
	
	SLP_NEX_MultiScans_Plot()
	
	ModifyGraph /W=Panel_NEX_MultiScans#IzeroPlot grid(bottom)=1,mirror=1,minor=1,fSize=10,lblMargin(left)=6,margin(left)=70
	Label /W=Panel_NEX_MultiScans#IzeroPlot left "\\Z16I\\Bzero\\M\\Z16 (A)"
	Label /W=Panel_NEX_MultiScans#IzeroPlot bottom "Photon energy (eV)"
	
	ModifyGraph /W=Panel_NEX_MultiScans#ROIPlot grid(bottom)=1,mirror=1,minor=1,fSize=10,lblMargin(left)=6,margin(left)=70
	Label /W=Panel_NEX_MultiScans#ROIPlot left "\\Z16PEEM intensity (a.u.)"
	Label /W=Panel_NEX_MultiScans#ROIPlot bottom "Photon energy (eV)"
	
	SetVariable setvar_ROISel,pos={275.00,457.00},size={80.00,14.00},proc=SetVarProc_NEX_MultiScans,title="ROI:"
	SetVariable setvar_ROISel,limits={1,inf,1},value= root:Package_SLP:NEXAFS:MultiScans:ROI_Sel
	
	//ListBox (imported from Main NEX Panel)
	ListBox ScanList,pos={489.00,37.00},size={288.00,290.00},proc=ListBoxProc_NEX_MultiScans
	ListBox ScanList,listWave=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	ListBox ScanList,selWave=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispSelW
	ListBox ScanList,mode= 2,selRow=0
	ListBox ScanList,widths={24,75,50,54,66,7,37,44,44,44,44,44,44,44,44,44}
	ListBox ScanList,userColumnResize= 1

	//Rescale the Izero, ROI plot (reset zoom)
	Button button_ReScaleIzero,pos={7.00,223.00},size={100.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Rescale",fSize=12
	Button button_ReScaleROI,pos={9.00,452.00},size={100.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Rescale",fSize=12

	//Shift adjustments
	Variable Button_xPos=370
	Variable Button_xSize=110
	Button button_Up,fSize=12,pos={Button_xPos,38.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Up"
	Button button_Down,fSize=12,pos={Button_xPos,80.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Down"
	Button button_Left,fSize=12,pos={370.00,58.00},size={50.00,20.00},proc=ButtonProc_NEX_MultiScans,title="<"
	Button button_Right,fSize=12,pos={422.00,58.00},size={50.00,20.00},proc=ButtonProc_NEX_MultiScans,title=">"
	SetVariable setvar_CorrectionStep,pos={Button_xPos,105.00},size={97.00,14.00},title="Step (eV)"
	SetVariable setvar_CorrectionStep,limits={0,inf,0.005},value= root:Package_SLP:NEXAFS:MultiScans:Correction_Step
	Button button_TimeDelay,fSize=12,pos={Button_xPos,125.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Add delay.."
	Button button_Fit,fSize=12,pos={Button_xPos,156.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Fit"
	Button button_CopyFit,fSize=12,pos={Button_xPos,178.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Copy fit result"
	Button button_SaveCorrections,fSize=12,pos={Button_xPos,206.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Save corrections"
	Button button_LoadCorrections,fSize=12,pos={Button_xPos,228.00},size={110.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Load corrections"
	Button button_SelAll,fSize=12,pos={Button_xPos,261.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Select all"
	Button button_SelNone,fSize=12,pos={Button_xPos,285.00},size={Button_xSize,20.00},proc=ButtonProc_NEX_MultiScans,title="Select none"
	
	//EXPORT
	//EXPORT + status..
	Button button_Export,pos={670.00,332.00},size={100.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Export",fSize=12,fColor=(65535,0,0)
	SetVariable setvar_PanelNotification,pos={775.00,336.00},size={277.00,14.00},title="Status:"
	SetVariable setvar_PanelNotification,value= root:Package_SLP:NEXAFS:MultiScans:Panel_Notification
	
	//Export options
		//Merge and average selected scans
	CheckBox check_Create_AvgData,pos={371.00,362.00},size={106.00,16.00},title="Create data avarage"
	CheckBox check_Create_AvgData,variable= root:Package_SLP:NEXAFS:MultiScans:Create_AvgData_Flg
		//Keep individual scans after corrections (large RAM needed)
	CheckBox check_Keep_IndvScans,pos={488.00,361.00},size={133.00,16.00},title="Individual corrected scans"
	CheckBox check_Keep_IndvScans,variable= root:Package_SLP:NEXAFS:MultiScans:Keep_IndvScans_Flg
		//Create average Izero
	CheckBox check_Create_AvgIzero,pos={371.00,379.00},size={103.00,16.00},title="Create I\\Bzero\\M avarage"
	CheckBox check_Create_AvgIzero,variable= root:Package_SLP:NEXAFS:MultiScans:Create_AvgIzero_Flg
		//Craete indv. Izero (after correction)
	CheckBox check_Create_IndvIzero,pos={488.00,379.00},size={123.00,16.00},title="Individual corrected I\\Bzero\\M"
	CheckBox check_Create_IndvIzero,variable= root:Package_SLP:NEXAFS:MultiScans:Keep_IndvIzero_Flg
		//Export to .tiff files to selected folder in the computer (can be opened by ImageJ/FIJI)
	CheckBox check_Export_TiffStack,pos={370.00,405.00},size={108.00,16.00},title="Export results to .tiff"
	CheckBox check_Export_TiffStack,variable= root:Package_SLP:NEXAFS:MultiScans:Export_TiffStack_Flg
		//Export corrected Izero (indv. and avg. if selected) as a .csv file in computer (can be opened by Excel)
	CheckBox check_CreateIzeroCSV,pos={488.00,405.00},size={117.00,16.00},title="Create .csv file for I\\Bzero"
	CheckBox check_CreateIzeroCSV,variable= root:Package_SLP:NEXAFS:MultiScans:Export_IzeroCSV_Flg
		//Directory to export to waves inside Igor
	SetVariable setvar_ExportDest,pos={632.00,363.00},size={342.00,14.00},title="Export to:"
	SetVariable setvar_ExportDest,valueBackColor=(56797,56797,56797)
	SetVariable setvar_ExportDest,value= root:Package_SLP:NEXAFS:MultiScans:Export_Dest,noedit= 1
	Button button_BrowseIgorFolder,pos={980.00,358.00},size={70.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Browse.."
	Button button_BrowseIgorFolder,fSize=12
		//Directory to export to .tiff file in computer
	SetVariable setvar_ExportDest1,pos={630.00,405.00},size={344.00,14.00},title="Export to:"
	SetVariable setvar_ExportDest1,valueBackColor=(56797,56797,56797)
	SetVariable setvar_ExportDest1,value= root:Package_SLP:NEXAFS:MultiScans:Com_Dest,noedit= 1
	Button button_BrowseComFolder,pos={982.00,401.00},size={70.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Browse.."
	Button button_BrowseComFolder,fSize=12
		//**Future upgrade** - Send the result to Main NEX panel for data processing..
	CheckBox check_Export_SendToNEXPanel,pos={369.00,431.00},size={116.00,16.00},title="Send to NEXAFS Panel"
	CheckBox check_Export_SendToNEXPanel,variable= root:Package_SLP:NEXAFS:MultiScans:SendToNEXPanel_Flg
	
	//FINISH
	Button button_Done,pos={951.00,448.00},size={100.00,20.00},proc=ButtonProc_NEX_MultiScans,title="Done",fSize=12
End

Function SLP_NEX_MultiScans_CorrectEnergy_Batch()
	//DESCRIPTIONS: Batch processing. Correct the energy of selected scans, merge and export them
	//					to Igor or as files in the computer.
	//CREATED: 2020.06
	//CALLS: SLP_NEX_MultiScans_CorrectEnergy()
	
	Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	Wave NEXMulti_ScanListDispSelW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispSelW
	Variable N_Scans=dimsize(NEXMulti_ScanListDispW,0)
	Variable i=0
	String ScanName=""
	SVAR Panel_Notification=root:Package_SLP:NEXAFS:MultiScans:Panel_Notification
	SVAR Export_Dest=root:Package_SLP:NEXAFS:MultiScans:Export_Dest
	NVAR Keep_IndvScans_Flg=root:Package_SLP:NEXAFS:MultiScans:Keep_IndvScans_Flg
	NVAR Create_AvgData_Flg=root:Package_SLP:NEXAFS:MultiScans:Create_AvgData_Flg
	NVAR Export_TiffStack_Flg=root:Package_SLP:NEXAFS:MultiScans:Export_TiffStack_Flg
	NVAR Create_AvgIzero_Flg=root:Package_SLP:NEXAFS:MultiScans:Create_AvgIzero_Flg
	NVAR Keep_IndvIzero_Flg=root:Package_SLP:NEXAFS:MultiScans:Keep_IndvIzero_Flg
	NVAR Export_IzeroCSV_Flg=root:Package_SLP:NEXAFS:MultiScans:Export_IzeroCSV_Flg
	SVAR Com_Dest=root:Package_SLP:NEXAFS:MultiScans:Com_Dest
	Listbox ScanList win=Panel_NEX_MultiScans,SelRow=i
	
	Variable N_Scans_Selected=0
	For (i=0;i<N_Scans;i+=1)
		If (NEXMulti_ScanListDispSelW[i][0]==48)
			N_Scans_Selected+=1
		EndIF
	EndFor
	Variable j=0
	
	For (i=0;i<N_Scans;i+=1)
		SetVariable setvar_PanelNotification valueBackColor=(65535,49157,16385),win=Panel_NEX_MultiScans
		If (NEXMulti_ScanListDispSelW[i][0]==48) //If users select the scan to be included
			j+=1
			Listbox ScanList win=Panel_NEX_MultiScans,SelRow=i
			SLP_NEX_MultiScans_Plot()
			ScanName=NEXMulti_ScanListDispW[i][1]
			Panel_Notification="Loading raw data for "+ScanName+". ("+num2str(j)+"/"+num2str(N_Scans_Selected)+")"
			DoUpdate
			
			SLP_NEX_MultiScans_CorrectEnergy()
			Wave NEXVolW_Corrected=$(Export_Dest+ScanName+"_Corrected")
			
			If (Export_TiffStack_Flg) //Export to .tiff stack
				ImageSave/T="tiff" /U/S/DS=16 NEXVolW_Corrected as Com_Dest+ScanName+"_Corrected.tif"
			EndIf
			
			If (Create_AvgData_Flg)
				If (j==1) //Create AvgDataW by duplicating the 1st scan.
					Duplicate /O NEXVolW_Corrected,$(Export_Dest+"NEXVolW_Combined") /Wave=NEXVolW_Combined
					NEXVolW_Combined=0
				EndIf
				NEXVolW_Combined+=NEXVolW_Corrected
			EndIf
			
			If (Create_AvgIzero_Flg)
				If (j==1) //Create AvgDataW by duplicating the 1st scan.
					Duplicate /O $("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_I0_corrected"),$(Export_Dest+"AvgIzero") /Wave=AvgIzeroW
					AvgIzeroW=0
				EndIf
				Wave IzeroW_Corrected=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_I0_corrected")
				AvgIzeroW+=IzeroW_Corrected
			EndIf
			
			If (Keep_IndvIzero_Flg)
				Duplicate /O $("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_I0_corrected"),$(Export_Dest+ScanName+"_I0_corrected")
			EndIf
				
			If (Export_IzeroCSV_Flg)
				If (j==1) //Create a table
					Dowindow /K NEX_MultiScans_IzeroCSV
					Edit /N=NEX_MultiScans_IzeroCSV
					Wave hvW=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv")
					Appendtotable /W=NEX_MultiScans_IzeroCSV hvW 
				EndIf
				Wave IzeroW_Corrected=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_I0_corrected")
				Appendtotable /W=NEX_MultiScans_IzeroCSV IzeroW_Corrected
			EndIf
			
			If (!Keep_IndvScans_Flg) //Option to not delete indv. scan for e.g. indv. Izero normalization (need more RAM)
				Killwaves NEXVolW_Corrected
			EndIf
			
			
		EndIf
	EndFor
	
	 //Divide by number of selected scans to get the average int. (instead of integration)
	If (Create_AvgData_Flg)
		NEXVolW_Combined/=N_Scans_Selected
	EndIf
	If (Create_AvgIzero_Flg)
		AvgIzeroW/=N_Scans_Selected
		If (Export_IzeroCSV_Flg)
			Appendtotable /W=NEX_MultiScans_IzeroCSV AvgIzeroW
		EndIf
	EndIf
	If (Export_IzeroCSV_Flg)
		SaveTableCopy /T=2 /W=NEX_MultiScans_IzeroCSV as Com_Dest+"IzeroCSV.csv"
	EndIf
	
	SetVariable setvar_PanelNotification valueBackColor=0,win=Panel_NEX_MultiScans
	Panel_Notification="Export finished"
	SLP_Util_PlayAlert()
End

Function SLP_NEX_MultiScans_CorrectEnergy()
	//CREATED: 06.2020
	//DESCRIPTIONS: Correct energy of NEX Vol data by interpolation. Need hv_corrected wave which
	//					is created by .._MultiScans_Import(). Need to load raw data (from the computer directory where
	//					the orignial NEX scan was loaded from).
	
	Controlinfo /W=Panel_NEX_MultiScans ScanList
	Variable SelRow=V_Value
	SVAR Export_Dest=root:Package_SLP:NEXAFS:MultiScans:Export_Dest
	
	Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	Wave NEXMulti_Correction_Manual=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
	
	String ScanName = NEXMulti_ScanListDispW[SelRow][1]
	String RawDataPath = NEXMulti_ScanListDispW[SelRow][14]
	SLP_Util_LoadMultImg2Vol(RawDataPath,"root:Package_SLP:NEXAFS:MultiScans:"+ScanName,0,1)
	Wave NEXVolW=$("root:Package_SLP:NEXAFS:MultiScans:"+ScanName)
	
	Wave hvW=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv")
	Wave hvW_Corrected=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv_corrected")
	Duplicate /O hvW,$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_Spectrum") /Wave=SpectrumW
	Duplicate /O hvW,$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_Spectrum_corrected") /Wave=SpectrumW_Corrected
	SpectrumW_Corrected=0
	
	Duplicate /O NEXVolW,$(Export_Dest+ScanName+"_Corrected") /WAVE=NEXVolW_Corrected
	NEXVolW_Corrected=0

	Variable N_Rows=dimsize(NEXVolW,0)
	Variable N_Cols=dimsize(NEXVolW,1)
	Variable N_Layers=dimsize(NEXVolW,2)
	
	//Variable CorrectionValue=NEXMulti_Correction_Manual[0]
	Variable i,j,k
	
	SVAR Panel_Notification=root:Package_SLP:NEXAFS:MultiScans:Panel_Notification
	Panel_Notification="Interpolating "+ScanName+" .."
	DoUpdate
	
	For (i=0;i<N_Rows;i+=1)
		For (j=0;j<N_Cols;j+=1)
			SpectrumW[]=NEXVolW[i][j][p]
			For (k=0;k<N_Layers;k+=1)	
				SpectrumW_Corrected[k]=interp(hvW[k],hvW_Corrected,SpectrumW)
			EndFor
			NEXVolW_Corrected[i][j][]=SpectrumW_Corrected[r]
		EndFor
	EndFor
	Killwaves SpectrumW,SpectrumW_Corrected
	Killwaves NEXVolW
	SLP_Util_ExtractZProfile2(ScanName,ScanName+"_NEXSpectrum",263,256,30)
	SLP_Util_ExtractZProfile2(ScanName+"_Corrected",ScanName+"_NEXSpectrum_Corrected",263,256,30)
End


Function ListBoxProc_NEX_MultiScans(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	//CREATED: 06.2020
	//DESCRIPTIONS: ListBox procs for NEX_MultiScans panel
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	Wave /T ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	String ScanName=ScanListDispW[row][1]
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			SLP_NEX_MultiScans_Plot()
			break
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_NEX_MultiScans_UpdateCorrection()
			//SLP_NEX_CorrectEnergy_Izero(ScanName)
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_MultiScans(ba) : ButtonControl
	//CREATED: 06.2020
	//DESCRIPTIONS: Button procs for NEX_MultiScans panel
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
			Wave NEXMulti_ScanListDispSelW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispSelW
			Wave NEXMulti_Correction_Manual=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
			Wave NEXMulti_Correction_Fitted=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Fitted
			NVAR Correction_Step=root:Package_SLP:NEXAFS:MultiScans:Correction_Step
			NVAR ROI_Sel=root:Package_SLP:NEXAFS:MultiScans:ROI_Sel
			SVAR Export_Dest=root:Package_SLP:NEXAFS:MultiScans:Export_Dest
			SVAR Com_Dest=root:Package_SLP:NEXAFS:MultiScans:Com_Dest
			
			ControlInfo /W=Panel_NEX_MultiScans ScanList
			Variable ScanList_SelRow=V_Value
			Variable N_Scans=Dimsize(NEXMulti_ScanListDispW,0)

			StrSwitch(ba.CtrlName)	// string switch with name of the control
				case "Button_Up":		//Move scan selection in the ScanList up
					If (ScanList_SelRow > 0)
						ListBox ScanList Win=Panel_NEX_MultiScans,SelRow=ScanList_SelRow-1
						SLP_NEX_MultiScans_Plot()
					EndIf
					break
				case "Button_Down":	//Move scan selection in the ScanList down
					If (ScanList_SelRow < N_Scans-1)
						ListBox ScanList Win=Panel_NEX_MultiScans,SelRow=ScanList_SelRow+1
						SLP_NEX_MultiScans_Plot()
					EndIf
					break
				case "Button_Right":	//Shift Izero and ROI curve to the higher energy
					NEXMulti_Correction_Manual[ScanList_SelRow]+=Correction_Step
					NEXMulti_ScanListDispW[ScanList_SelRow][3]=num2str(NEXMulti_Correction_Manual[ScanList_SelRow])
					SLP_NEX_MultiScans_ShiftIzero(NEXMulti_ScanListDispW[ScanList_SelRow][1],NEXMulti_Correction_Manual[ScanList_SelRow])
					SLP_NEX_MultiScans_ShiftROIW(NEXMulti_ScanListDispW[ScanList_SelRow][1],NEXMulti_Correction_Manual[ScanList_SelRow],ROI_Sel)
					break
				case "Button_Left":	//Shift Izero and ROI curve to the lower energy
					NEXMulti_Correction_Manual[ScanList_SelRow]-=Correction_Step
					NEXMulti_ScanListDispW[ScanList_SelRow][3]=num2str(NEXMulti_Correction_Manual[ScanList_SelRow])
					SLP_NEX_MultiScans_ShiftIzero(NEXMulti_ScanListDispW[ScanList_SelRow][1],NEXMulti_Correction_Manual[ScanList_SelRow])
					SLP_NEX_MultiScans_ShiftROIW(NEXMulti_ScanListDispW[ScanList_SelRow][1],NEXMulti_Correction_Manual[ScanList_SelRow],ROI_Sel)
					break
				case "button_TimeDelay":		//Add time delay to the selected scan and the subsequent scans. This is used when, e.g. undulator gets stuck or scan program crashes.
					Variable ScanTimeDelay=0
					Prompt ScanTimeDelay,"Delay"
					DoPrompt "Enter time delay",ScanTimeDelay
					If (V_Flag==0) //If user click continue..
						SLP_NEX_MultiScans_AddDelay(ScanTimeDelay)
					EndIf
					Break
				case "Button_fit":		//Fit the correction curve with an exponential function (w/ XOffset)
					//**NOTE** don't use /G in CurveFit if you don't want to guess. This is only allowed for CurveFit but not for FuncFit.
					CurveFit/TBOX=768 exp_XOffset, root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual /D=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Fitted /X=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Time
					//CurveFit/G/TBOX=768 exp_XOffset, root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual kwCWave=root:Package_SLP:NEXAFS:MultiScans:NEXFitCoef /D=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Fitted /X=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Time
					NEXMulti_ScanListDispW[][4]=num2str(NEXMulti_Correction_Fitted[p])
					break
				case "button_CopyFit":	//Copy the fit result into the correction table.
					NEXMulti_Correction_Manual=NEXMulti_Correction_Fitted
					NEXMulti_ScanListDispW[][3]=NEXMulti_ScanListDispW[p][4]
					SLP_NEX_MultiScans_ShiftIzero_Batch()
					SLP_NEX_MultiScans_ShiftROIW_Batch()
					break
				case "button_Export":		//Do the correction and merge. This the main execution of the Correct and Merge module.
					SLP_NEX_MultiScans_CorrectEnergy_Batch()
					break
				case "button_BrowseIgorFolder":	//Select where to put the results in. Default is root:
					CreateBrowser prompt="Select where to export the result to..", showWaves=0, showVars=0, showStrs=0
					if(V_Flag!=0)
						//Add data wave
						Export_Dest=stringfromlist(0,S_BrowserList)
					EndIf
					break
				case "button_BrowseComFolder":		//Select where to put the exported files (.tiff, .csv) in the computer
					GetFileFolderInfo /Q/D
					If (V_Flag==0)
						Com_Dest=S_Path
					EndIf
					break			
				case "button_ReScaleIzero":		//Rescale Izero plot
					SetAxis /A /W=Panel_NEX_MultiScans#IzeroPlot
					Break
				case "button_ReScaleROI":		//Rescale ROI plot
					SetAxis /A /W=Panel_NEX_MultiScans#ROIPlot
					Break
				case "Button_SelAll":		//Select all scans for export
					NEXMulti_ScanListDispSelW[][0]=48
					Break
				case "Button_SelNone":	//Remove all selections
					NEXMulti_ScanListDispSelW[][0]=32
					Break
				case "Button_SaveCorrections":		//Save the correction table into a folder (:MultiScans:SavedCorrections:) to be used later
					String CorrectionName="Correction"
					Prompt CorrectionName,"Correction Name"
					DoPrompt "Saving corrections",CorrectionName
					If (V_Flag==0) 
						Duplicate NEXMulti_ScanListDispW,$("root:Package_SLP:NEXAFS:MultiScans:SavedCorrections:"+CorrectionName)
						Duplicate NEXMulti_ScanListDispSelW,$("root:Package_SLP:NEXAFS:MultiScans:SavedCorrections:"+CorrectionName+"_Sel")
					EndIf
					Break
				case "Button_LoadCorrections":		//Load the previously saved correction table
					String CurrentDataFolder=GetDataFolder(1)
					SetDataFolder root:Package_SLP:NEXAFS:MultiScans:SavedCorrections:
					String CorrectionLoadList=wavelist("*",";","TEXT:1")
					SetDataFolder $CurrentDataFolder
					String CorrectionLoadName 
					prompt CorrectionLoadName, "Select correction to load:", popup CorrectionLoadList	// prompt with dropdown menu
					DoPrompt "Select",CorrectionLoadName
					If (V_Flag==0)
						Wave /T SavedCorrW=$("root:Package_SLP:NEXAFS:MultiScans:SavedCorrections:"+CorrectionLoadName)
						Wave SavedCorrSelW=$("root:Package_SLP:NEXAFS:MultiScans:SavedCorrections:"+CorrectionLoadName+"_Sel")
						If (Dimsize(SavedCorrW,0)==Dimsize(NEXMulti_ScanListDispW,0)&&StringMatch(SavedCorrW[0][1],NEXMulti_ScanListDispW[0][1])) //Check that scanlists are the same
							NEXMulti_ScanListDispW=SavedCorrW
							NEXMulti_ScanListDispSelW=SavedCorrSelW
							SLP_NEX_MultiScans_UpdateCorrection()
						Else
							DoAlert 0,"Mismatched correction data"
						EndIf
					EndIf
					Break
				case "Button_Done":	//Close the panel
					Dowindow /K Panel_NEX_MultiScans
					Break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_NEX_MultiScans_AddDelay(ScanTimeDelay)
	//CREATED: 06.2020
	//DESCRIPTIONS: add time delay to the selected scan and the subsequent scans. This is for when there is a pause during one scan
	//						that delays the time of the scan. This should help to make the energy drift vs. time fitting by exponential function
	//						work better.
	Variable ScanTimeDelay
	ControlInfo /W=Panel_NEX_MultiScans ScanList
	Variable ScanList_SelRow=V_Value
	Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW 
 	Variable i=0
 	Variable NewTimeValue=0
 	For (i=ScanList_SelRow;i<dimsize(NEXMulti_ScanListDispW,0);i+=1)
 		NewTimeValue=str2num(NEXMulti_ScanListDispW[i][2])+ScanTimeDelay
 		NEXMulti_ScanListDispW[i][2]=num2str(NewTimeValue)
 	EndFor
 	SLP_NEX_MultiScans_UpdateCorrection()
End


Function SLP_NEX_MultiScans_ShiftROIW(ScanName,E_Shift,ROI_Sel)
	//CREATED: 06.2020
	//DESCRIPTIONS: Shift ROI wave of a scan by interpolation. Put the wave inside NEX's scan folder
	String ScanName
	Variable E_Shift,ROI_Sel
	
	Wave hvW=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv")
	Wave hvW_Corrected=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv_corrected")
	hvW_Corrected=hvW+E_Shift
	Wave ROIW=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_ROI"+num2str(ROI_Sel))
	Duplicate /O ROIW,$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_ROI"+num2str(ROI_Sel)+"_corrected") /Wave=ROIW_Corrected
	Variable i=0
	For (i=0;i<dimsize(hvW,0);i+=1)
		ROIW_Corrected[i]=interp(hvW[i],hvW_Corrected,ROIW)
	EndFor
End

Function SLP_NEX_MultiScans_ShiftROIW_Batch()
	//CREATED: 06.2020
	//DESCRIPTIONS: Shift all ROI waves
	//CALLS: SLP_NEX_MultiScans_ShiftROIW(ScanName,E_Shift,ROI_Sel)
	Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	Wave NEXMulti_Correction_Manual=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
	NVAR ROI_Sel=root:Package_SLP:NEXAFS:MultiScans:ROI_Sel
	
	Variable N_Scans=dimsize(NEXMulti_ScanListDispW,0)
	Variable i=0
	String ScanName=""
	Variable E_Shift=0
	
	For (i=0;i<N_Scans;i+=1)
		ScanName=NEXMulti_ScanListDispW[i][1]
		E_Shift=NEXMulti_Correction_Manual[i]
		SLP_NEX_MultiScans_ShiftROIW(ScanName,E_Shift,ROI_Sel)
	EndFor
End


Function SLP_NEX_MultiScans_ShiftIzero(ScanName,E_Shift)
	//CREATED: 06.2020
	//DESCRIPTIONS: Shift Izero wave of a scan by interpolation.  Put the wave inside NEX's scan folder
	String ScanName
	Variable E_Shift
	Wave hvW=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv")
	Wave hvW_Corrected=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_hv_corrected")
	hvW_Corrected=hvW+E_Shift
	Wave IzeroW=$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_I0")
	Duplicate /O IzeroW,$("root:Package_SLP:NEXAFS:"+ScanName+":"+ScanName+"_I0_corrected") /Wave=IzeroW_Corrected
	Variable i=0
	For (i=0;i<dimsize(hvW,0);i+=1)
		IzeroW_Corrected[i]=interp(hvW[i],hvW_Corrected,IzeroW)
	EndFor
End

Function SLP_NEX_MultiScans_ShiftIzero_Batch()
	//CREATED: 06.2020
	//DESCRIPTIONS: Shift all Izero waves
	//CALLS: SLP_NEX_MultiScans_ShiftIzero(ScanName,E_Shift)
	Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	Wave NEXMulti_Correction_Manual=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
	
	Variable N_Scans=dimsize(NEXMulti_ScanListDispW,0)
	Variable i=0
	String ScanName=""
	Variable E_Shift=0
	
	For (i=0;i<N_Scans;i+=1)
		ScanName=NEXMulti_ScanListDispW[i][1]
		E_Shift=NEXMulti_Correction_Manual[i]
		SLP_NEX_MultiScans_ShiftIzero(ScanName,E_Shift)
	EndFor
End

Function SLP_NEX_MultiScans_Plot()
	//CREATED: 06.2020
	//DESCRIPTIONS: Plot original and drift-corrected Izero, ROI. Highlight the selected scans
	//						in Izero, ROI plots, and put a cursor on the Correction vs. time plot. Called when user
	//						selects a scan or when corrections are modified.
	Wave /T NEXMulti_ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	Variable i=0
	String ScanName=""
	String RawDataPath=""
	String SLPADataPath=""
	NVAR ROI_Sel=root:Package_SLP:NEXAFS:MultiScans:ROI_Sel
	ControlInfo /W=Panel_NEX_MultiScans ScanList
	Variable ScanList_SelRow=V_Value
	
	For (i=0;i<dimsize(NEXMulti_ScanListDispW,0);i+=1)
		ScanName=NEXMulti_ScanListDispW[i][1]
		SLPADataPath=NEXMulti_ScanListDispW[i][15]
		Wave hvW=$(SLPADataPath+":"+ScanName+"_hv")
		wave IzeroW=$(SLPADataPath+":"+ScanName+"_I0")
		Wave ROIW=$(SLPADataPath+":"+ScanName+"_ROI"+num2str(ROI_Sel))
		Wave IzeroW_Corrected=$(SLPADataPath+":"+ScanName+"_I0_Corrected")
		Wave ROIW_Corrected=$(SLPADataPath+":"+ScanName+"_ROI"+num2str(ROI_Sel)+"_Corrected")
		
		//Clear
		If (!stringmatch("",TraceInfo("Panel_NEX_MultiScans#IzeroPlot",ScanName,0))) //Check if trace exists
			Removefromgraph /W=Panel_NEX_MultiScans#IzeroPlot $(ScanName),$(ScanName+"_Corrected")
			Removefromgraph /W=Panel_NEX_MultiScans#ROIPlot $(ScanName),$(ScanName+"_Corrected")
		EndIf
		//Put all graphs
		Appendtograph /W=Panel_NEX_MultiScans#IzeroPlot IzeroW /TN=$(ScanName) vs hvW
		Modifygraph /W=Panel_NEX_MultiScans#IzeroPlot rgb($ScanName)=(40000,40000,40000)
		Appendtograph /W=Panel_NEX_MultiScans#IzeroPlot IzeroW_Corrected /TN=$(ScanName+"_Corrected") vs hvW
		
		Appendtograph /W=Panel_NEX_MultiScans#ROIPlot ROIW /TN=$(ScanName) vs hvW
		Modifygraph /W=Panel_NEX_MultiScans#ROIPlot rgb($ScanName)=(40000,40000,40000)
		Appendtograph /W=Panel_NEX_MultiScans#ROIPlot ROIW_Corrected /TN=$(ScanName+"_Corrected") vs hvW

		If (i==ScanList_SelRow)
			Modifygraph /W=Panel_NEX_MultiScans#IzeroPlot lsize($ScanName)=2
			Modifygraph /W=Panel_NEX_MultiScans#IzeroPlot lsize($ScanName+"_Corrected")=2, rgb($ScanName+"_Corrected")=(65535,50000,0)
			Modifygraph /W=Panel_NEX_MultiScans#ROIPlot lsize($ScanName+"_Corrected")=2, rgb($ScanName+"_Corrected")=(65535,50000,0)
			CurSor /P/W=Panel_NEX_MultiScans#CorrectionCurve A NEXMulti_Correction_Manual ScanList_SelRow
		EndIf
	Endfor
End

Function SetVarProc_NEX_MultiScans(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva
	//CREATED: 06.2020
	//DESCRIPTIONS: SetVar procs for NEX_MultiScans panel

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			StrSwitch(sva.CtrlName)
				case "setvar_ROISel": //Change ROI number in the ROI plot (default is ROI1)
					SLP_NEX_MultiScans_Import()
					SLP_NEX_MultiScans_UpdateCorrection()
					SLP_NEX_MultiScans_Plot()
					Break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_NEX_MultiScans_Import()
	//CREATD: 06.2020
	//DESCRIPTIONS: Creates a new Correction Table and import the selected scans from main NEX panel into Correct&Merge panel.
	//						Take waves from main NEX funciton.
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	WAVE SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	Make /T/O/N=(0,16) root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW /WAVE=NEXMulti_ScanListDispW
	Make /O/N=(0,16) root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispSelW /WAVE=NEXMulti_ScanListDispSelW
	SetDimLabel 1,0,Sel,NEXMulti_ScanListDispW
	SetDimLabel 1,1,ScanName,NEXMulti_ScanListDispW
	SetDimLabel 1,2,StartTime,NEXMulti_ScanListDispW
	SetDimLabel 1,3,Correction,NEXMulti_ScanListDispW
	SetDimLabel 1,4,CorrectionFit,NEXMulti_ScanListDispW
	SetDimLabel 1,14,RawDataFolder,NEXMulti_ScanListDispW
	SetDimLabel 1,15,IgorDataFolder,NEXMulti_ScanListDispW
	NVAR ROI_Sel=root:Package_SLP:NEXAFS:MultiScans:ROI_Sel
	Variable i=0
	Variable j=0
	String ScanName=""
	String RawDataPath=""
	String SLPADataPath=""
	For (i=0;i<dimsize(SLP_NEX_ScanDisplayListW,0);i+=1)
		If (SLP_NEX_ScanDisplaySelListW[i][8]==48) //User selects the scan for Correct & Merge (col8 in the ScanListDisplay)
			ScanName=SLP_NEX_ScanListW[i][3]
			RawDataPath=SLP_NEX_ScanListW[i][0]
			SLPADataPath=SLP_NEX_ScanListW[i][2]
			//Add a row to the ScanList
			redimension /N=(dimsize(NEXMulti_ScanListDispW,0)+1,dimsize(NEXMulti_ScanListDispW,1)) NEXMulti_ScanListDispW
			redimension /N=(dimsize(NEXMulti_ScanListDispSelW,0)+1,dimsize(NEXMulti_ScanListDispSelW,1)) NEXMulti_ScanListDispSelW
			//Initialize the value in the row
			NEXMulti_ScanListDispW[j][]={{""},{ScanName},{num2str(j)},{"0"},{""},{""},{""},{""},{""},{""},{""},{""},{""},{""},{RawDataPath},{SLPADataPath}}
			NEXMulti_ScanListDispSelW[j][]={{32},{0},{2},{2},{0},{0},{0},{0},{0},{0},{0},{0},{0},{0},{0},{0}}
			//Create Corrected waves (hv, Izero, ROI) inside the main NEX folder.
			Wave hvW=$(SLPADataPath+":"+ScanName+"_hv")
			Duplicate /O hvW,$(SLPADataPath+":"+ScanName+"_hv_Corrected")
			wave IzeroW=$(SLPADataPath+":"+ScanName+"_I0")
			Wave ROIW=$(SLPADataPath+":"+ScanName+"_ROI"+num2str(ROI_Sel))
			duplicate /O IzeroW,$(SLPADataPath+":"+ScanName+"_I0_Corrected") /Wave=IzeroW_Corrected
			duplicate /O ROIW,$(SLPADataPath+":"+ScanName+"_ROI"+num2str(ROI_Sel)+"_Corrected") /Wave=ROIW_Corrected
			j+=1 //Count the number of selected scans
		Endif
	EndFor
	//Create numeric waves for display, fitting, corrections.
	Make /O/N=(j) root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Ref_Position
	Make /O/N=(j) root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
	Make /O/N=(j) root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Fitted
	Make /O/N=(j) root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Time
	SLP_NEX_MultiScans_UpdateCorrection()
End

Function SLP_NEX_MultiScans_UpdateCorrection()
	//CREATED: 06.2020
	//DESCRIPTIONS: Copy data from ScanListDisplay (text wave) into numeric waves to be used for plotting and fitting.
	//						Update the shift corrections to the Izero, ROI plot
	Wave /T ScanListDispW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_ScanListDispW
	Wave CorrectionW_Manual=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Manual
	Wave TimeW=root:Package_SLP:NEXAFS:MultiScans:NEXMulti_Correction_Time
//	NVAR ROI_Sel=root:Package_SLP:NEXAFS:MultiScans:ROI_Sel
//	CorrectionW_Manual[]=str2num(ScanListDispW[p][3])
//	TimeW[]=str2num(ScanListDispW[p][2])
//	ControlInfo /W=Panel_NEX_MultiScans ScanList
//	Variable ScanList_SelRow=V_Value
	
	CorrectionW_Manual[]=str2num(ScanListDispW[p][3])
	
	SLP_NEX_MultiScans_ShiftIzero_Batch()
	SLP_NEX_MultiScans_ShiftROIW_Batch()
	TimeW[]=str2num(ScanListDispW[p][2])
	//SLP_NEX_MultiScans_ShiftIzero(ScanListDispW[ScanList_SelRow][1],CorrectionW_Manual[ScanList_SelRow])
	//SLP_NEX_MultiScans_ShiftROIW(ScanListDispW[ScanList_SelRow][1],CorrectionW_Manual[ScanList_SelRow],ROI_Sel)
End


Function SLP_Util_ExtractZProfile_Cursor(WindowName,CursorName,bin,Display_Flg)
	//CREATED: 06.2020
	//MODIFIED: 19.06.2020
	//				21.06.2020 - Fix bug - the WaveInfo function doesn't actually return wave folder in PATH. Use GetWaveDataFolder instead.
	//DESCRIPTIONS: Extract zProfile from a cursor in the DataVolW display window.
	
	String WindowName,CursorName
	Variable bin,Display_Flg
	Variable p_pos=pcsr($CursorName,WindowName)
	Variable q_pos=qcsr($CursorName,WindowName)
	
	String imageNameStr=StringFromList(0,ImageNameList(WindowName,";"),";")
	Wave VolW=ImageNameToWaveRef(WindowName, imageNameStr )
	String Info=WaveInfo(VolW,0)
	//String VolW_FName=StringByKey("PATH", info)+":"+NameOfWave(VolW)
	String VolW_FName=GetWavesDataFolder(VolW,2)
	
	
	SLP_Util_ExtractZProfile2(VolW_FName,VolW_FName+"zProfile",p_pos,q_pos,bin)
	Wave zProfileW=$(VolW_FName+"zProfile")
	SetScale /P x,dimOffset(VolW,2),dimdelta(VolW,2),zProfileW
	If (Display_Flg)
		Display zProfileW
	EndIf
End

Function SLP_Util_CorrectVolume(VolW_FName,CorrW_FName)
	//CREATED: 02.2020
	//DESCRIPTIONS: slides the spectrum in each pixel of the specified hyperspectral volume (VolW) with a correction value identified by the CorrW
	
	String VolW_FName,CorrW_FName
	Wave VolW=$VolW_FName
	Wave CorrW=$CorrW_FName
	
	Variable i,j,k
	Variable Eshift=0
	Variable NewE=0
	Duplicate /O VolW,$(VolW_FName+"_SCorrected") /Wave=SCWave
	Make /O/N=(dimsize(VolW,2)) SpectrumW
	SetScale /P x,dimoffset(VolW,2),dimdelta(VolW,2),SpectrumW
	Duplicate /O SpectrumW,CorrectedSpectrumW
	Variable MinE=dimoffset(SpectrumW,0)
	Variable MaxE=dimoffset(SpectrumW,0)+(dimsize(SpectrumW,0)-1)*dimdelta(SpectrumW,0)
	For (i=0;i<dimsize(VolW,0);i+=1)
		For (j=0;j<dimsize(VolW,1);j+=1)
			If (numtype(CorrW[i][j])!=2)
				SpectrumW[]=VolW[i][j][p]
				Eshift=CorrW[i][j]
				CorrectedSpectrumW=0
				For (k=0;k<dimsize(VolW,2);k+=1)
					NewE=dimoffset(SpectrumW,0)+k*dimdelta(SpectrumW,0)-Eshift
					If (NewE>=MinE&&NewE<=MaxE)
						CorrectedSpectrumW[k]=SpectrumW(NewE)
					Elseif (NewE<MinE)
						CorrectedSpectrumW[k]=SpectrumW[0]
					Elseif (NewE>MaxE)
						CorrectedSpectrumW[k]=SpectrumW[dimsize(SpectrumW,0)-1]
					EndIf
				EndFor
				SCWave[i][j][]=CorrectedSpectrumW[r]
			EndIf
		EndFor
	EndFor
	
End

Function SLP_Util_ExtractZProfile2(ImgVolW_FName,ZProfW_FName,Vol_x,Vol_y,Bin)
	//Description: Extract z profile Ver. 2. **Allows changing destination name instead of just using _zProfl suffix**
	//Created: 02.2020
	string ImgVolW_FName,ZProfW_FName
	variable Vol_x,Vol_y
	variable Bin
	
	//Default = use "" for zProfW_FName: automatically add "_zProfl" suffix
	If (StringMatch(ZProfW_FName,""))
		ZProfW_FName=ImgVolW_FName+"_zProfl"
	EndIf
	String ZProfWTmp_FName=ImgVolW_FName+"_zProflTmp"
	
	Wave ImgVolW=$ImgVolW_FName
		
	make /O /N=(dimsize(ImgVolW,2)) $ZProfW_FName /Wave=ZProfW
	make /O /N=(dimsize(ImgVolW,2)) $ZProfWTmp_FName /Wave=ZProfW_tmp

	ZProfW=0
	
	variable i
	variable j
	variable k=0
	
	For (i=round(Vol_x-Bin/2);i<round(Vol_x+Bin/2);i+=1)
		For (j=round(Vol_y-Bin/2);j<round(Vol_y+Bin/2);j+=1)
			if (i>=0&&j>=0)
				ZProfW_tmp[]=ImgVolW[i][j][p]
				ZProfW+=ZProfW_tmp
				k+=1
			Endif
		EndFor
	EndFor
	
	KillWaves ZProfW_tmp
	ZProfW/=k //Average the intensity
	
	variable ImgVolW_zStart=dimoffset(ImgVolW,2)
	variable ImgVolW_zStep=dimDelta(ImgVolW,2)
	
	setscale /P x,ImgVolW_zStart,ImgVolW_zStep,ZProfW
End

Function SLP_PCA_Init()
	string Current_folder=getdatafolder(1)
	
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:PEEMPCA
	
	SetDataFolder root:Package_SLP:PEEMPCA
	Make /T/O/N=(0,32) SLP_PEEMPCA_ScanListW
	Make /T/O/N=(0,32) SLP_PEEMPCA_ScanListDispW
	Make /O/N=(0,32) SLP_PEEMPCA_ScanListDispSelW
	
	SetDimLabel 1,0,DataName,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,1,OrgDataFolder,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,2,RawData_Flg,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,3,FrameNum,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,4,PC1_Level,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,5,PC2_Level,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,6,PC3_Level,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,7,PC4_Level,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,8,Overlay,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,9,PreProcessFlg,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,10,No_PCs,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,11,pCursor,SLP_PEEMPCA_ScanListW
	SetDimLabel 1,12,qCursor,SLP_PEEMPCA_ScanListW

	SetDimLabel 1,0,Sel,SLP_PEEMPCA_ScanListDispW
	SetDimLabel 1,1,DataName,SLP_PEEMPCA_ScanListDispW
	SetDimLabel 1,2,Notes,SLP_PEEMPCA_ScanListDispW
	
	Make /T/O/N=4 PCANameW
	PCANameW={"PC1","PC2","PC3","PC4"}
	Make /O/N=(16,3) PCAColorTable
	PCAColorTable[0][]={{0},{0},{0}}
	PCAColorTable[1][]={{65535},{0},{0}}
	PCAColorTable[2][]={{65535},{65535},{0}}
	PCAColorTable[3][]={{0},{65535},{0}}
	PCAColorTable[4][]={{0},{0},{65535}}
	
	Variable /G FrameNum=0
	Variable /G SelRow=0
	String /G Overlay="1;2;3;4"
	Variable /G zProflBin=1
	Variable /G PC_Sel=4
	Variable /G No_PCs=4
	Variable /G ThresholdMax=1000
	Variable /G ThresholdMin=-1000
	Variable /G ThresholdStep=50
	
	//For Export
	Variable /G Export_Projections_Flg
	Variable /G Export_ThresholdImages_Flg
	Variable /G Export_ColorMap_Flg
	Variable /G Export_IntgSpectra_Flg
	String /G ExportName
	Variable /G ExportNo
	
	Make /O/N=(3,3) DummyImgW
	DummyImgW=0
	DummyImgW[1][1]=65535
	Make /O/N=(4) DummySpectrumW
	DummySpectrumW=0
	
	SetDataFolder $Current_folder
End

Function SLP_PCA_CrossCorrelate(DataW_FName)
	//Descriptions: Cross correlation function to find how much the shift (e.g. non-isocrhomaticiy) is from 
	//				the principal conponent's integrated spectrum is for each pixel and make a map.
	//				**This doesn't work well because the shift is limited by the step size of the scan, 
	//				and this is not fine enough to fit for the non-isochromaticity shift (typically around 0.7 eV for the whole image)
	String DataW_FName
	Wave DataVolW=$DataW_FName
	Wave ProjColorW=$(DataW_FName+"_ProjColor")
	//Duplicate /O ProjColorW,$(DataW_FName+"_EShiftW") /Wave=EShiftW
	Make /O/N=(dimsize(DataVolW,0),dimsize(DataVolW,1)) $(DataW_FName+"_EShiftW") /Wave=EShiftW
	EShiftW=NaN
	Variable i,j,k
	k=0
	Variable PC_No=0
	Make /O /N=(dimsize(DataVolW,2)) root:Package_SLP:PEEMPCA:SpectrumW /Wave=SpectrumW
	SetScale /P x,dimoffset(DataVolW,2),dimdelta(DataVolW,2),SpectrumW
	Variable Shift=0
	For (i=0;i<dimsize(ProjColorW,0);i+=1)
		For (j=0;j<dimsize(ProjColorW,1);j+=1)
			If (ProjColorW[i][j]==0)
				EShiftW[i][j]=NaN
			Else
				SpectrumW[]=DataVolW[i][j][p]
				PC_No=ProjColorW[i][j]
				Wave IntgW=$(DataW_FName+"_Proj"+num2str(PC_No)+"_IntgSpctrm")
				duplicate /O IntgW, root:Package_SLP:PEEMPCA:CorrelationW /Wave=CorrelationW
				correlate /C SpectrumW,CorrelationW
				WaveStats /Q/R=[0,floor(dimsize(SpectrumW,0)*0.5)] CorrelationW
				Shift=pnt2x(CorrelationW,V_MaxLoc)-dimoffset(SpectrumW,0)
				Shift=V_MaxLoc-dimoffset(SpectrumW,0)
				EShiftW[i][j]=Shift
				//CURVE fitting to help with resolution but the process will take a lot of time
//				Wave /T T_Constraints=root:T_Constraints
//				CurveFit /N/Q/G/NTHR=0 gauss  CorrelationW[0,25] /D /C=T_Constraints 
//				Wave W_coef
//				EshiftW[i][j]=W_coef[2]
				If (mod(i,100)==0&&mod(j,100)==0)
					DoUpdate
				Endif
			EndIf
		EndFor
	EndFor

End


Function SLP_PCA_Process(DataW_FName,Preprocess_Flg)
	//Descriptions: From 3D hyperspectral volume, create [standardized] 2D data matrix and covarient matrix. Then find Eigenvalues and Eigen Vector for PCA
	//Created: 01.2020
	
	String DataW_FName
	Variable PreProcess_Flg //Subtract mean and then normalize the 
	Wave DataVolW=$DataW_FName
	//Wave ScreenW=M_ROIMask
	Wave ScreenW=$(DataW_FName+"_PCAROI")
	Variable N_PixelX=dimsize(DataVolW,0)
	Variable N_PixelY=dimsize(DataVolW,1)
	Variable N_ESteps=dimsize(DataVolW,2)

	//Create 2D data matrix
	Make /O/N=(N_ESteps,(N_PixelX*N_PixelY)) $(DataW_FName+"_PCA") /Wave=PCADataM
	Variable i,j,k
	k=0
	For (i=0;i<N_PixelX;i+=1)
		For (j=0;j<N_PixelY;j+=1)
			If (ScreenW[i][j]==1)
				PCADataM[][k]=DataVolW[i][j][p]
				k+=1
			EndIf
		EndFor
	EndFor
	Variable N_Column=k
	
	//Reduce the size of the PCA data matrix
	DeletePoints /M=1 k,(dimsize(PCADataM,1)-k), PCADataM
	
	//Preprocessing for PCA 
	If (PreProcess_Flg)
		MatrixOP/O PCADataM=normalize(subtractMean(PCADataM,1))
		//MatrixOP/O PCADataM=subtractMean(PCADataM,1)
	EndIf
	//Covarient Matrix
	Make /O/N=(N_ESteps,N_ESteps) $(DataW_FName+"_PCACov") /Wave=CovM
	
	MatrixOP /O CovM = PCADataM x PCADataM^t
	
	MatrixEigenV /L/R CovM
	
	Wave M_L_eigenVectors
	Wave W_eigenValues
	Duplicate /O M_L_eigenVectors ,$(DataW_FName+"_EigenVectors_M")
	Duplicate /O W_eigenValues ,$(DataW_FName+"_EigenValues_W")
End

Function SLP_PCA_Project(DataW_FName,N_Projections)
	//Descriptions: Project each pixel onto PCs created from SLP_PCA_Process to produce a gray scale level.
	//Created: 01.2020
	String DataW_FName
	Variable N_Projections
	Wave DataVolW=$DataW_FName
	//Wave ScreenW=M_ROIMask
	Wave ScreenW=$(DataW_FName+"_PCAROI")
	Variable N_PixelX=dimsize(DataVolW,0)
	Variable N_PixelY=dimsize(DataVolW,1)
	Variable N_ESteps=dimsize(DataVolW,2)
	
	Wave EigenVectorsM=$(DataW_FName+"_EigenVectors_M")
	Wave EigenValuesCmplx=$(DataW_FName+"_EigenValues_W")
	
	Variable i=1
	Variable j,k
	Variable ProjectLevel=0
	
	For (i=1;i<=N_Projections;i+=1)
		Make /O /N=(dimsize(EigenVectorsM,0)) $(DataW_FName+"_EigenV"+num2str(i)) /Wave=EigenVectorW
		EigenVectorW[]=EigenVectorsM[p][i]
		SetScale /P x,dimoffset(DataVolW,2),dimdelta(DataVolW,2),EigenVectorW
		
		Make /O /N=(N_PixelX,N_PixelY) $(DataW_FName+"_Proj"+num2str(i)) /Wave=ProjW
		Make /O /N=(N_ESteps) $(DataW_FName+"_RawSpctrm") /Wave=SpectrumW
		ProjW=NaN
		For (j=0;j<N_PixelX;j+=1)
			For (k=0;k<N_PixelY;k+=1)
				If (ScreenW[j][k]==1)
					SpectrumW[]=DataVolW[j][k][p]
					ProjectLevel=MatrixDot(SpectrumW,EigenVectorW)
					ProjW[j][k]=ProjectLevel
				EndIf
			EndFor
		EndFor
		
		ImageThreshold /T=0 ProjW
		Duplicate /O root:M_ImageThresh,$(DataW_FName+"_Proj"+num2str(i)+"_Bin")
	EndFor
End

Function SLP_PCA_Color(DataW_FName,Order)
	//Descriptions: Overlaying threshold images from up to 4 pcs onto a single image. Users have to choose the order of overlaying,
	//				starting from the bottom layer. The upper layer will replace the lower ones only in the pixel with '1' value.
	//				The resulting image contains pixels with numbers 1-4 that mean they belong to PC1-PC4.
	//Created: 01.2020
	String DataW_FName
	String Order //e.g. "2;3;4;1"
	Variable N_PCAs=4
	
	Variable i=1
	Variable j,k
	String PCANo=""
	Duplicate /O $(DataW_FName+"_Proj1_Bin"),$(DataW_FName+"_ProjColor") /Wave=ProjColorW
	ProjColorW=0
	For (i=1;i<=N_PCAs;i+=1)
		PCANo=StringFromList(i-1,Order,";")
		Wave BinW=$(DataW_FName+"_Proj"+PCANo+"_Bin")
		ProjColorW=ProjColorW
		For (j=0;j<dimsize(ProjColorW,0);j+=1)
			For (k=0;k<dimsize(ProjColorW,1);k+=1)
				If (BinW[j][k]==255)
					ProjColorW[j][k]=str2num(PCANo)
				EndIf
			EndFor
		EndFor
	EndFor
End

Function SLP_PCA_AddDataWPrompt()
	String SelectedWaveFName=""
	Execute "CreateBrowser prompt=\"Select data volume wave\", showWaves=1, showVars=0, showStrs=0" 
	//Old style. in Igor7 no need to use Execute
	//DoUpdate
	SVAR S_BrowserList=:S_BrowserList
	NVAR V_Flag=:V_Flag
	if(V_Flag!=0)
		//Add data wave
		SelectedWaveFName=stringfromlist(0,S_BrowserList)
		SLP_PCA_AddDataW(SelectedWaveFName,0)
	EndIf
End

Function SLP_PCA_AddDataW(SelectedWaveFName,Prompt_Flg)
	//Descriptions: Function to add existing 3D hyperspectral volume into the PCA module. This will not copy the data (due to the large size)
	//				All the resulting waves from PCA will be stored in the same data folder as the original 3D volume.
	//Created: 01.2020
	String SelectedWaveFName
	Variable Prompt_Flg //Ask user to edit data name
	String DataName=StringFromList(ItemsInList(SelectedWaveFName,":")-1,SelectedWaveFName,":")
	
	Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
	Wave /T SLP_PEEMPCA_ScanListDispW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListDispW
	Wave SLP_PEEMPCA_ScanListDispSelW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListDispSelW
	
	If (Prompt_Flg)
		Prompt DataName,"Enter data name"
		DoPrompt "Add data wave",DataName
	EndIf
	
	//Need script to check duplicate, illegal names
	Redimension /N=(dimsize(SLP_PEEMPCA_ScanListW,0)+1,32)  SLP_PEEMPCA_ScanListW
	Redimension /N=(dimsize(SLP_PEEMPCA_ScanListDispW,0)+1,32)  SLP_PEEMPCA_ScanListDispW
	Redimension /N=(dimsize(SLP_PEEMPCA_ScanListDispSelW,0)+1,32)  SLP_PEEMPCA_ScanListDispSelW
	
	Variable N_Scans=dimsize(SLP_PEEMPCA_ScanListW,0)
	SLP_PEEMPCA_ScanListW[N_Scans-1][0]=DataName
	SLP_PEEMPCA_ScanListW[N_Scans-1][1]=SelectedWaveFName
	SLP_PEEMPCA_ScanListW[N_Scans-1][2]="1"
	SLP_PEEMPCA_ScanListW[N_Scans-1][3]="0"
	SLP_PEEMPCA_ScanListW[N_Scans-1][4]="0"
	SLP_PEEMPCA_ScanListW[N_Scans-1][5]="0"
	SLP_PEEMPCA_ScanListW[N_Scans-1][6]="0"
	SLP_PEEMPCA_ScanListW[N_Scans-1][7]="0"
	
	SLP_PEEMPCA_ScanListDispW[N_Scans-1][1]=DataName
	
	SLP_PEEMPCA_ScanListDispSelW[N_Scans-1][0]=32
	SLP_PEEMPCA_ScanListDispSelW[N_Scans-1][2]=2
	
	//Create zProflW for PCA
	SLP_Util_ExtractZProfile2(SelectedWaveFName,SelectedWaveFName+"_PCAZProfl",0,0,1)
	
	SLP_PCA_DisplaySelectedData(DataName)
End

Function SLP_PCA_FindDataRow(DataName)
	//Descriptions:  Find the row of the chosen scan name
	String DataName
	Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW 
	
	FindValue /TEXT=DataName /TXOP=6 SLP_PEEMPCA_ScanListW
	variable Col=floor(V_value/dimsize(SLP_PEEMPCA_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_PEEMPCA_ScanListW,0)
	
	Return DataRow
End

Function  SLP_PCA_DisplaySelectedData(DataName)
	String DataName
	
	Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW 
	Wave  PCAColorTable=root:Package_SLP:PEEMPCA:PCAColorTable
	Variable DataRow=SLP_PCA_FindDataRow(DataName)
	
	String SelectedWaveFName=SLP_PEEMPCA_ScanListW[DataRow][1]
	
	SLP_Util_AddnRmTraces("SLP_PCA_Panel01#IMGVOL",SelectedWaveFName,1)
	If (Exists(SelectedWaveFName+"_PCAPolyX"))
		//Appendtograph /W=SLP_PCA_Panel01#IMGVOL $(SelectedWaveFName+"_PCAPolyY") vs $(SelectedWaveFName+"_PCAPolyX")
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#IMGVOL",SelectedWaveFName+"_PCAPolyX"+";"+SelectedWaveFName+"_PCAPolyY",2)
	EndIf
	NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
	NVAR FrameNum=root:Package_SLP:PEEMPCA:FrameNum
	SVAR Overlay=root:Package_SLP:PEEMPCA:Overlay
	
	SelRow=DataRow
	FrameNum=str2num(SLP_PEEMPCA_ScanListW[DataRow][3])
	ListBox List_ScansList win=SLP_PCA_Panel01, selRow=SelRow
	
	String ImgName=SLP_PEEMPCA_ScanListW[DataRow][0]
	Modifyimage /W=SLP_PCA_Panel01#IMGVOL $ImgName plane=FrameNum
	
	If (Exists(SelectedWaveFName+"_Proj1"))
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#PC1",SelectedWaveFName+"_Proj1",1)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#PC2",SelectedWaveFName+"_Proj2",1)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#PC3",SelectedWaveFName+"_Proj3",1)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#PC4",SelectedWaveFName+"_Proj4",1)
		
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#TH_PC1",SelectedWaveFName+"_Proj1_Bin",1)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#TH_PC2",SelectedWaveFName+"_Proj2_Bin",1)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#TH_PC3",SelectedWaveFName+"_Proj3_Bin",1)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#TH_PC4",SelectedWaveFName+"_Proj4_Bin",1)
	EndIf
	
	If (Exists(SelectedWaveFName+"_Proj1_IntgSpctrm"))
		String IntgSpectraList=SelectedWaveFName+"_Proj1_IntgSpctrm;"+SelectedWaveFName+"_Proj2_IntgSpctrm;"+SelectedWaveFName+"_Proj3_IntgSpctrm;"+SelectedWaveFName+"_Proj4_IntgSpctrm;"
		IntgSpectraList+=SelectedWaveFName+"_PCAZProfl;"
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#INTG_SPECTRA",IntgSpectraList,0)
		Modifygraph /W=SLP_PCA_Panel01#INTG_SPECTRA rgb($(DataName+"_Proj1_IntgSpctrm"))=(PCAColorTable[1][0],PCAColorTable[1][1],PCAColorTable[1][2])
		Modifygraph /W=SLP_PCA_Panel01#INTG_SPECTRA rgb($(DataName+"_Proj2_IntgSpctrm"))=(PCAColorTable[2][0],PCAColorTable[2][1],PCAColorTable[2][2])
		Modifygraph /W=SLP_PCA_Panel01#INTG_SPECTRA rgb($(DataName+"_Proj3_IntgSpctrm"))=(PCAColorTable[3][0],PCAColorTable[3][1],PCAColorTable[3][2])
		Modifygraph /W=SLP_PCA_Panel01#INTG_SPECTRA rgb($(DataName+"_Proj4_IntgSpctrm"))=(PCAColorTable[4][0],PCAColorTable[4][1],PCAColorTable[4][2])
		ModifyGraph /W=SLP_PCA_Panel01#INTG_SPECTRA mode($(DataName+"_PCAzProfl"))=3,UseMrkStrokeRGB($(DataName+"_PCAzProfl"))=1
		ModifyGraph /W=SLP_PCA_Panel01#INTG_SPECTRA marker($(DataName+"_PCAzProfl"))=8,msize($(DataName+"_PCAzProfl"))=3
		ModifyGraph /W=SLP_PCA_Panel01#INTG_SPECTRA mrkThick($(DataName+"_PCAzProfl"))=0.5,mrkStrokeRGB($(DataName+"_PCAzProfl"))=(34952,34952,34952)
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#PC_Color",SelectedWaveFName+"_ProjColor",1)
		ModifyImage /W=SLP_PCA_Panel01#PC_Color $(DataName+"_ProjColor") cindex= PCAColorTable
		SLP_Util_AddnRmTraces("SLP_PCA_Panel01#PC_Pop","root:Package_SLP:PEEMPCA:PCANameW;"+SelectedWaveFName+"_PCAPop",2)
		ModifyGraph /W=SLP_PCA_Panel01#PC_POP rgb($(DataName+"_PCAPop"))=(10000,10000,10000)
	EndIf
	
	Checkbox check_PreProcess win=SLP_PCA_Panel01,value=str2num(SLP_PEEMPCA_ScanListW[DataRow][9])
	
	Slider slider_Th_PC1 win=SLP_PCA_Panel01,value=str2num(SLP_PEEMPCA_ScanListW[DataRow][4])
	Slider slider_Th_PC2 win=SLP_PCA_Panel01,value=str2num(SLP_PEEMPCA_ScanListW[DataRow][5])
	Slider slider_Th_PC3 win=SLP_PCA_Panel01,value=str2num(SLP_PEEMPCA_ScanListW[DataRow][6])
	Slider slider_Th_PC4 win=SLP_PCA_Panel01,value=str2num(SLP_PEEMPCA_ScanListW[DataRow][7])
	
	Overlay=SLP_PEEMPCA_ScanListW[DataRow][8]
End

Function SLP_PCA_IntgSpectra(DataW_FName)
	//Descriptions: Create an integrated spectrum from all pixels of the same species (label by color map from SLP_PCA_Color).
	//				One pixel can only belong to one species. The integrated spectrum comes from the resulting Color Map and not from the Threshold image.
	//Created: 02:2020
	String DataW_FName
	Wave ProjColorW=$(DataW_FName+"_ProjColor")
	Wave DataVolW=$DataW_FName
	Variable N_PCAs=4
	Variable i=0
	Variable j,k
	Make /O/N=(dimsize(DataVolW,2)) root:TmpSpctrmW /Wave=TmpSpctrmW
	Make /O/N=(N_PCAs) $(DataW_FName+"_PCAPop") /Wave=PopW
	PopW=0
	For (i=1;i<=N_PCAs;i+=1)
		Make /O/N=(dimsize(DataVolW,2)) $(DataW_FName+"_Proj"+num2str(i)+"_IntgSpctrm") /Wave=SpectrumW
		SpectrumW=0
		For (j=0;j<dimsize(ProjColorW,0);j+=1)
			For (k=0;k<dimsize(ProjColorW,1);k+=1)
				If (ProjColorW[j][k]==i)
					TmpSpctrmW[]=DataVolW[j][k][p]
					SpectrumW+=TmpSpctrmW
					PopW[i-1]+=1
				EndIf
			EndFor
		EndFor
		SpectrumW/=PopW[i-1]
		SetScale /P x,dimoffset(DataVolW,2),dimdelta(DataVolW,2),SpectrumW
	EndFor
	Killwaves TmpSpctrmW
End

Function SliderProc_PCA(sa) : SliderControl
	STRUCT WMSliderAction &sa

	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
				NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
				String DataW_FName=SLP_PEEMPCA_ScanListW[SelRow][1]
				String ImgName=SLP_PEEMPCA_ScanListW[SelRow][0]
				Variable curval = sa.curval
				String CtrlName=sa.CtrlName
				strswitch(CtrlName)
					case  "slider_Th_PC1":
					case  "slider_Th_PC2":
					case  "slider_Th_PC3":
					case  "slider_Th_PC4":
				
						String PC_No=CtrlName[(strlen(CtrlName)-1)]
						Wave ProjW=$(DataW_FName+"_Proj"+PC_No)
						ImageThreshold /T=(curval) ProjW
						Duplicate /O root:M_ImageThresh,$(DataW_FName+"_Proj"+PC_No+"_Bin")
						
						SLP_PEEMPCA_ScanListW[SelRow][4+(str2num(PC_No)-1)]=num2str(curval)
						
						break
					case "Slider_ImgVolFrame":
						//String ImgName=StringFromList(Itemsinlist(DataW_FName,":")-1,DataW_FName,":")
						Modifyimage /W=SLP_PCA_Panel01#IMGVOL $ImgName plane=curval
						SLP_PEEMPCA_ScanListW[SelRow][3]=num2str(curval)
						break
				EndSwitch
			endif
			break
	endswitch

	return 0
End

Function SLP_PCA_CursorHook(s) //HOOK FUNCTION to see spectrum at different (x,y) by moving a cursor

	STRUCT WMWinHookStruct &s

	Variable hookResult = 0
	
		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_PCA_Panel01 activeSW
				String activeSubwindow = S_value
				Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
				NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
				
				//Hook for zProfile
				if (CmpStr(activeSubwindow,"SLP_PCA_Panel01#PC_COLOR")== 0&&!stringmatch("",CsrInfo(A,"SLP_PCA_Panel01#PC_COLOR")))
					SLP_PEEMPCA_ScanListW[SelRow][11]=num2str(pcsr(A,"SLP_PCA_Panel01#PC_COLOR"))
					SLP_PEEMPCA_ScanListW[SelRow][12]=num2str(qcsr(A,"SLP_PCA_Panel01#PC_COLOR"))
				Endif
				SLP_PCA_UpdatezProfl()
				break
		endswitch

	return hookResult		// 0 if nothing done, else 1
End

Function SLP_PCA_UpdatezProfl()
	Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
	NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
	Variable pCursor=str2num(SLP_PEEMPCA_ScanListW[SelRow][11])
	Variable qCursor=str2num(SLP_PEEMPCA_ScanListW[SelRow][12])
	NVAR zProflBin=root:Package_SLP:PEEMPCA:zProflBin
	String DataVolW_FName=SLP_PEEMPCA_ScanListW[SelRow][1]
	SLP_Util_ExtractZProfile2(DataVolW_FName,DataVolW_FName+"_PCAzProfl",pCursor,qCursor,zProflBin)
	//Create DataVolW+_zProfl in the original raw data folder
	//**[NOTE] This will interfere with other SLPA module like IXPS
End


Function ButtonProc_PCA(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
			NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
			NVAR FrameNum=root:Package_SLP:PEEMPCA:FrameNum
			NVAR ThresholdMin=root:Package_SLP:PEEMPCA:ThresholdMin
			NVAR ThresholdMax=root:Package_SLP:PEEMPCA:ThresholdMax
			NVAR ThresholdStep=root:Package_SLP:PEEMPCA:ThresholdStep
			Variable ThresholdMin_LocalVar=ThresholdMin
			Variable ThresholdMax_LocalVar=ThresholdMax
			Variable ThresholdStep_LocalVar=ThresholdStep
			NVAR No_PCs=root:Package_SLP:PEEMPCA:No_PCs
			String DataW_FName=SLP_PEEMPCA_ScanListW[SelRow][1]
			String DataName=SLP_PEEMPCA_ScanListW[SelRow][0]
			Variable i=0
			Wave DataW=$DataW_FName
			Wave PCAColorTable=root:Package_SLP:PEEMPCA:PCAColorTable 
			strswitch(ba.CtrlName)	// string switch
				case "Button_LoadScan":
					SLP_PCA_AddDataWPrompt()
					Break
				case "Button_AutoContrast":
					Duplicate /O/R=[][][FrameNum] $DataW_FName,root:Package_SLP:PEEMPCA:SingleFrameImage /Wave=SingleFrameImage
					WaveStats /Q SingleFrameImage
					Variable IntMin=V_avg-V_sdev*2
					Variable IntMax=V_avg+V_sdev*2
					Modifyimage /W=SLP_PCA_Panel01#IMGVOL $(DataName) ctab={IntMin,IntMax,,0}
					Killwaves SingleFrameImage
					break
				case "Button_Rescale":
					SetAxis /A/R left
					SetAxis /A bottom
					break
				case "Button_ThRanges":
					//Igor doesn't take global variables for Prompt
					Prompt ThresholdMin_LocalVar, "Minimum level"
					Prompt ThresholdMax_LocalVar, "Maximum level"
					Prompt ThresholdStep_LocalVar, "Threshold adjustment step"
					DoPrompt "Enter a new threshold range", ThresholdMin_LocalVar,ThresholdMax_LocalVar,ThresholdStep_LocalVar
					If (V_Flag==0) //If user click continue
						ThresholdMin=ThresholdMin_LocalVar
						ThresholdMax=ThresholdMax_LocalVar
						ThresholdStep=ThresholdStep_LocalVar
						Slider slider_Th_PC1,limits={ThresholdMin,ThresholdMax,ThresholdStep},win=SLP_PCA_Panel01
						Slider slider_Th_PC2,limits={ThresholdMin,ThresholdMax,ThresholdStep},win=SLP_PCA_Panel01 
						Slider slider_Th_PC3,limits={ThresholdMin,ThresholdMax,ThresholdStep},win=SLP_PCA_Panel01 
						Slider slider_Th_PC4,limits={ThresholdMin,ThresholdMax,ThresholdStep},win=SLP_PCA_Panel01 
					EndIf
					break
				case "button_CreatePCs":
					ControlInfo /W=SLP_PCA_Panel01  check_PreProcess
					Variable PreProcess_Flg=V_Value
					SLP_PCA_Process(DataW_FName,PreProcess_Flg)
					SLP_PCA_Project(DataW_FName,No_PCs)
					SLP_PEEMPCA_ScanListW[SelRow][10]=num2str(No_PCs)
					SLP_PCA_DisplaySelectedData(DataName)
					SLP_Util_PlayAlert()
					Break
				case "button_CreateColorMap":
					String OverlayOrder=SLP_PEEMPCA_ScanListW[SelRow][8]
					SLP_PCA_Color(DataW_FName,OverlayOrder)
					SLP_PCA_IntgSpectra(DataW_FName)
					SLP_PCA_DisplaySelectedData(DataName)
					Break
				case "button_DrawROI":		// execute if case matches expression
					//Clear the screen mask (red x-y wave from Particle Analysis)
					String TraceName=stringfromlist(0,TraceNameList("SLP_PCA_Panel01#IMGVOL",";",3),";")
					If (itemsinlist(TraceNameList("SLP_PCA_Panel01#IMGVOL",";",3))!=0)
						RemoveFromGraph /W=SLP_PCA_Panel01#IMGVOL $TraceName
					EndIf
					
					setaxis /A/W=SLP_PCA_Panel01#IMGVOL bottom
					setaxis /A/R /W=SLP_PCA_Panel01#IMGVOL left
					
					SetActiveSubwindow SLP_PCA_Panel01#IMGVOL
					DrawAction /W=SLP_PCA_Panel01#IMGVOL delete
					
					showtools /W=SLP_PCA_Panel01 /A oval
					SetDrawLayer /W=SLP_PCA_Panel01#IMGVOL ProgFront
					TitleBox title_ScrnMskDraw win=SLP_PCA_Panel01,title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {100,0},frame=0
					SetDrawEnv /W=SLP_PCA_Panel01#IMGVOL fillpat= 0,linefgc=(65535,0,0)
					break
				case "Button_CreateROI":
					SetActiveSubwindow SLP_PCA_Panel01#IMGVOL
					String ImageName=stringfromlist(0,ImageNameList("SLP_PCA_Panel01#IMGVOL",";"),";")
					ImageGenerateROIMask /W=SLP_PCA_Panel01#IMGVOL /E=0 /I=1 $ImageName
					Wave M_ROIMask=:M_ROIMask
					Duplicate /O M_ROIMask, $(DataW_FName+"_PCAROI")
					TitleBox title_ScrnMskDraw disable=1
					DrawAction /W=SLP_PCA_Panel01#IMGVOL extractOutline
					Wave W_PolyX
					Wave W_PolyY
					W_PolyX*=dimsize(DataW,0);W_PolyY*=dimsize(DataW,1)
					Duplicate /O W_PolyX,$(DataW_FName+"_PCAPolyX")
					Duplicate /O W_PolyY,$(DataW_FName+"_PCAPolyY")
					DrawAction /W=SLP_PCA_Panel01#IMGVOL delete
					SLP_Util_AddnRmTraces("SLP_PCA_Panel01#IMGVOL",DataW_FName+"_PCAPolyX"+";"+DataW_FName+"_PCAPolyY",2)
					break
				case "Button_Export":
					NVAR ExportNo=root:Package_SLP:PEEMPCA:ExportNo
					SVAR ExportName=root:Package_SLP:PEEMPCA:ExportName
					ExportNo+=1
					sprintf ExportName,"PCA_Export%03d",ExportNo
					Panel_PCA_Export()
					break
				case "Button_EigenvaluesDisp":
					Wave EigenValuesCmplx=$(DataW_FName+"_EigenValues_W")
					Display  EigenValuesCmplx
					Modifygraph mirror=1, minor=1, tick(bottom)=3,nticks=10, mode=5,hbfill=2
					Modifygraph log(left)=1
					Setaxis bottom 0,10
					Label bottom "Eigen vector no."
					Label left "Eigen value"
					break
				case "Button_EigenVectorDisp":
					Display /N=EigenVectors
					For (i=1;i<=No_PCs;i+=1)
						Wave EigenVectorW=$(DataW_FName+"_EigenV"+num2str(i))
						Appendtograph EigenVectorW
						Modifygraph rgb($(DataName+"_EigenV"+num2str(i)))=(PCAColorTable[i][0],PCAColorTable[i][1],PCAColorTable[i][2])
					EndFor
					Modifygraph lsize=2,mirror=1,minor=1,tick=2
					Legend
					break
				case "Button_Cleanup1stFrame":
					DoAlert 1,"This will copy the 2nd frame of the ORIGINAL data volume and overwrite the 1st frame. The process cannot be undone. Proceed?"
					If (V_Flag==1)
						DataW[][][0]=DataW[p][q][1]
					EndIf
					break
				case "Button_Done":
					Dowindow /K SLP_PCA_Panel01
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ListBoxProc_PCA_ScanList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
		case 4: // cell selection
			Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
			String DataName=SLP_PEEMPCA_ScanListW[row][0]
			SLP_PCA_DisplaySelectedData(DataName)
			
			break
		case 3: // double click
			break
		//case 4: // cell selection
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function SetVarProc_PCA(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
			NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow 			
			String DataW_FName=SLP_PEEMPCA_ScanListW[SelRow][1]
			String ImgName=SLP_PEEMPCA_ScanListW[SelRow][0]
			StrSwitch(sva.CtrlName)
				case "setvar_Overlay":
					SLP_PEEMPCA_ScanListW[SelRow][8]=sval
					break
				case "SetVar_FrameNum":
					Modifyimage /W=SLP_PCA_Panel01#IMGVOL $ImgName plane=dval
					SLP_PEEMPCA_ScanListW[SelRow][3]=num2str(dval)
					break
				case "SetVar_zProflBin":
					SLP_PCA_UpdateZProfl()
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_PCA(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
			NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
			
			StrSwitch(cba.CtrlName)
				case "check_PreProcess":
					SLP_PEEMPCA_ScanListW[SelRow][9]=num2str(checked)
					break
				case "Check_zProfile":
					If (checked)
						Variable pCursor=str2num(SLP_PEEMPCA_ScanListW[SelRow][11])
						Variable qCursor=str2num(SLP_PEEMPCA_ScanListW[SelRow][12])
						Cursor /I/P/W=SLP_PCA_Panel01#PC_COLOR A $(SLP_PEEMPCA_ScanListW[SelRow][0]+"_ProjColor") pCursor,qCursor
						SLP_PCA_UpdateZProfl()
						SetActiveSubWindow SLP_PCA_Panel01#PC_COLOR
					Else
						Cursor /K /W=SLP_PCA_Panel01#PC_COLOR A
						Wave PCAzProflW=$(SLP_PEEMPCA_ScanListW[SelRow][1]+"_PCAzProfl")
						//Wave IntgSpctrm1W=$(DataName+"_Proj1_IntgSpctrm")
						PCAzProflW=0
					EndIf
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function Panel_PCA_Panel01() : Panel
	
	If (!DataFolderExists("root:Package_SLP:PEEMPCA"))
		SLP_PCA_init()
	EndIf
	
	DoWindow /K SLP_PCA_Panel01
	NewPanel /W=(225,95,1111,752) /N=SLP_PCA_Panel01
	
	NVAR FrameNum=root:Package_SLP:PEEMPCA:FrameNum
	NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
	SVAR Overlay=root:Package_SLP:PEEMPCA:Overlay
	NVAR zProflBin=root:Package_SLP:PEEMPCA:zProflBin
	NVAR PC_Sel=root:Package_SLP:PEEMPCA:PC_Sel
	NVAR No_PCs=root:Package_SLP:PEEMPCA:No_PCs
	NVAR ThresholdMin=root:Package_SLP:PEEMPCA:ThresholdMin
	NVAR ThresholdMax=root:Package_SLP:PEEMPCA:ThresholdMax
	NVAR ThresholdStep=root:Package_SLP:PEEMPCA:ThresholdStep
	
	Wave DummyImgW=root:Package_SLP:PEEMPCA:DummyImgW
	Wave DummySpectrum=root:Package_SLP:PEEMPCA:DummySpectrumW
	Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
		
	//LABELs
	SetDrawLayer UserBack
	SetDrawEnv fsize= 15
	DrawText 10,30,"Principal Component Analysis"
	DrawText 10,54,"Rawdata"
	DrawText 237,23,"Scan list"
	SetDrawEnv fsize= 11
	DrawText 346,197,"Move:"
	SetDrawEnv fillfgc= (35209,24158,31354)
	DrawRect 237,208,461,304
	SetDrawEnv textrgb= (65535,65535,65535)
	DrawText 247,235,"ROI"
	SetDrawEnv fillfgc= (25493,8995,26985)
	DrawRect 6,338,468,629
	DrawText 246,324,"Show"
	
	//COLORIZED
	ModifyPanel cbRGB=(51664,44236,58982)
	
	//Display
	//IMGVOL
	Display /N=IMGVOL /W=(9,95,225,304)/HOST=SLP_PCA_Panel01
	AppendImage /W=SLP_PCA_Panel01#IMGVOL /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#IMGVOL DummyImgW ,ctab= {*,*,Grays,0}//, plane=0
	ModifyGraph /W=SLP_PCA_Panel01#IMGVOL margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,mirror=2
	SetAxis /W=SLP_PCA_Panel01#IMGVOL/A/R left
	
	//PC_COLOR
	Display /N=PC_COLOR /W=(9,370,225,577)/HOST=SLP_PCA_Panel01
	AppendImage /W=SLP_PCA_Panel01#PC_COLOR /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#PC_COLOR  DummyImgW cindex= :Package_SLP:PEEMPCA:PCAColorTable
	ModifyGraph /W=SLP_PCA_Panel01#PC_COLOR  margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis /W=SLP_PCA_Panel01#PC_COLOR  /A/R left
	
	//PC1
	Display /N=PC1/W=(479,14,640,162)/HOST=SLP_PCA_Panel01
	AppendImage/W=SLP_PCA_Panel01#PC1 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#PC1 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#PC1 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis/W=SLP_PCA_Panel01#PC1 /A/R left
	TextBox /W=SLP_PCA_Panel01#PC1 /C/N=text0/F=0/A=LT "PC1"
	
	//PC2
	Display /N=PC2 /W=(479,167,640,316)/HOST=SLP_PCA_Panel01
	AppendImage/W=SLP_PCA_Panel01#PC2 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#PC2 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#PC2 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis/W=SLP_PCA_Panel01#PC2 /A/R left
	TextBox /W=SLP_PCA_Panel01#PC2 /C/N=text0/F=0/A=LT "PC2"
	
	//PC3
	Display /N=PC3 /W=(479,321,639,469)/HOST=SLP_PCA_Panel01
	AppendImage/W=SLP_PCA_Panel01#PC3 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#PC3 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#PC3 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis/W=SLP_PCA_Panel01#PC3 /A/R left
	TextBox /W=SLP_PCA_Panel01#PC3 /C/N=text0/F=0/A=LT "PC3"
	
	//PC4
	Display /N=PC4 /W=(479,475,640,623)/HOST=SLP_PCA_Panel01
	AppendImage/W=SLP_PCA_Panel01#PC4 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#PC4 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#PC4 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis/W=SLP_PCA_Panel01#PC4 /A/R left
	TextBox /W=SLP_PCA_Panel01#PC4 /C/N=text0/F=0/A=LT "PC4"
	
	//TH_PC1
	Display /N=TH_PC1 /W=(716,15,877,163)/HOST=SLP_PCA_Panel01
	AppendImage /W=SLP_PCA_Panel01#TH_PC1 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#TH_PC1 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#TH_PC1 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis /W=SLP_PCA_Panel01#TH_PC1 /A/R left
	
	//TH_PC2
	Display /N=TH_PC2 /W=(716,168,875,317)/HOST=SLP_PCA_Panel01
	AppendImage /W=SLP_PCA_Panel01#TH_PC2 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#TH_PC2 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#TH_PC2 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis /W=SLP_PCA_Panel01#TH_PC2 /A/R left
	
	//TH_PC3
	Display /N=TH_PC3 /W=(718,323,874,472)/HOST=SLP_PCA_Panel01
	AppendImage /W=SLP_PCA_Panel01#TH_PC3 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#TH_PC3 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#TH_PC3 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis /W=SLP_PCA_Panel01#TH_PC3 /A/R left
	
	//TH_PC4
	Display /N=TH_PC4 /W=(717,476,873,624)/HOST=SLP_PCA_Panel01
	AppendImage /W=SLP_PCA_Panel01#TH_PC4 /G=1 DummyImgW
	ModifyImage /W=SLP_PCA_Panel01#TH_PC4 DummyImgW ctab= {*,*,Grays,0}
	ModifyGraph /W=SLP_PCA_Panel01#TH_PC4 margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5,tick=3,mirror=1,noLabel=2
	SetAxis /W=SLP_PCA_Panel01#TH_PC4 /A/R left
	
	//PC_POP
	Display /N=PC_POP /W=(237,348,461,454)/HOST=SLP_PCA_Panel01 DummySpectrum vs root:Package_SLP:PEEMPCA:PCANameW
	ModifyGraph /W=SLP_PCA_Panel01#PC_POP wbRGB=(51664,44236,58982),gbRGB=(49151,49152,65535)
	Label /W=SLP_PCA_Panel01#PC_POP left "\\Z12Population"
	SetAxis /W=SLP_PCA_Panel01#PC_POP left 0,*
	
	//INTG_SPECTRA
	Display /N=INTG_SPECTRA /W=(236,462,462,622)/HOST=SLP_PCA_Panel01
	AppendToGraph DummySpectrum
	ModifyGraph /W=SLP_PCA_Panel01#INTG_SPECTRA wbRGB=(51664,44236,58982),gbRGB=(56797,56797,56797),  mirror=1,minor=1
	//Legend /W=SLP_PCA_Panel01#INTG_SPECTRA /C/N=text0/J/F=0/B=(48059,48059,48059)/X=69.86/Y=0.00 "\\s(IXPS11_S_Proj1_IntgSpctrm) PC1\r\\s(IXPS11_S_Proj2_IntgSpctrm) PC2"
	//AppendText "\\s(IXPS11_S_Proj3_IntgSpctrm) PC3\r\\s(IXPS11_S_Proj4_IntgSpctrm) PC4"
	
	//RAWDATA SECTION
	//Frame slider
	Slider Slider_ImgVolFrame,pos={11,59},size={207,13},proc=SliderProc_PCA,win=SLP_PCA_Panel01
	Slider Slider_ImgVolFrame,limits={0,40,1},variable= root:Package_SLP:PEEMPCA:FrameNum,side= 0,vert= 0,ticks= 0,win=SLP_PCA_Panel01
	SetVariable SetVar_FrameNum,pos={122,38},size={99,16},proc=SetVarProc_PCA,title="Frame no.",win=SLP_PCA_Panel01
	SetVariable SetVar_FrameNum,fSize=10,value= root:Package_SLP:PEEMPCA:FrameNum,win=SLP_PCA_Panel01
	
	//ScanListDispW
	ListBox List_ScansList,pos={237,26},size={226,152},proc=ListBoxProc_PCA_ScanList,win=SLP_PCA_Panel01
	ListBox List_ScansList,listWave=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListDispW,win=SLP_PCA_Panel01
	ListBox List_ScansList,selWave=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListDispSelW,win=SLP_PCA_Panel01
	ListBox List_ScansList,mode= 2,selRow= 2,userColumnResize= 1,win=SLP_PCA_Panel01
	ListBox List_ScansList,widths={20,70,250,0,0,0,0,0,0,0,0,0,0,0,0,0},win=SLP_PCA_Panel01
	
	//Auto contrast
	Button Button_AutoContrast,pos={10,75},size={75,16},proc=ButtonProc_PCA,title="Auto contrast",fSize=10,win=SLP_PCA_Panel01
	Button Button_ReScale,pos={87,75},size={55,16},proc=ButtonProc_PCA,title="Rescale",fSize=10,win=SLP_PCA_Panel01
	Button Button_LoadScan,pos={394,7},size={70,16},proc=ButtonProc_PCA,title="Load scan..",fSize=10
	Button Button_DelScan,pos={239,183},size={80,16},proc=ButtonProc_PCA,title="Delete scan(s)",fSize=10
	Button Button_MoveUp,pos={381,183},size={40,16},proc=ButtonProc_PCA,title="Up",fSize=10
	Button Button_MoveDown,pos={424,183},size={40,16},proc=ButtonProc_PCA,title="Down",fSize=10
	
	//Note for ROI selection
	TitleBox title_ScrnMskDraw,pos={100,0},size={283,12},disable=1,title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'"
	TitleBox title_ScrnMskDraw,frame=0
	
	//PCA SECTION
	//ROI
	Button button_DrawROI,pos={271,221},size={95,16},proc=ButtonProc_PCA,title="Draw ROI",fSize=10
	Button Button_CreateROI,pos={374,221},size={75,16},proc=ButtonProc_PCA,title="Create ROI",fSize=10
	//PCA
	CheckBox check_PreProcess,pos={246,240},size={145,15},proc=CheckProc_PCA,title="Pre-process data matrix",fSize=11,fColor=(61166,61166,61166),value= 0
	SetVariable SetVar_NoPCs,pos={246,259},size={99,16},proc=SetVarProc_PCA,title="No. of PCs"
	SetVariable SetVar_NoPCs,fSize=10,fColor=(61166,61166,61166),limits={4,inf,1},value= root:Package_SLP:PEEMPCA:No_PCs
	Button Button_Cleanup1stFrame,pos={348,259},size={110,16},proc=ButtonProc_PCA,title="Clean up 1st frame",fSize=10
	Button button_CreatePCs,pos={244,280},size={205,16},proc=ButtonProc_PCA,title="PCA!",fSize=12,fColor=(65535,65535,65535)
	Button Button_EigenvaluesDisp,pos={284,309},size={80,16},proc=ButtonProc_PCA,title="Eigenvalues",fSize=10
	Button Button_EigenVectorDisp,pos={366,309},size={80,16},proc=ButtonProc_PCA,title="Eigen vectors",fSize=10
	
	//THRESHOLD SECTION
	Slider slider_Th_PC1,pos={646,15},size={65,148},proc=SliderProc_PCA
	Slider slider_Th_PC1,limits={ThresholdMin,ThresholdMax,ThresholdStep},value= 600
	Slider slider_Th_PC2,pos={646,169},size={65,148},proc=SliderProc_PCA
	Slider slider_Th_PC2,limits={ThresholdMin,ThresholdMax,ThresholdStep},value= 1000
	Slider slider_Th_PC3,pos={646,322},size={65,148},proc=SliderProc_PCA
	Slider slider_Th_PC3,limits={ThresholdMin,ThresholdMax,ThresholdStep},value= 500
	Slider slider_Th_PC4,pos={646,476},size={65,148},proc=SliderProc_PCA
	Slider slider_Th_PC4,limits={ThresholdMin,ThresholdMax,ThresholdStep},value= -1000
//	SetVariable SetVar_PCSel,pos={515,628},size={99,16},proc=SetVarProc_PCA,title="PC number:"
//	SetVariable SetVar_PCSel,fSize=10
//	SetVariable SetVar_PCSel,limits={4,inf,1},value= root:Package_SLP:PEEMPCA:PC_Sel
	
	//OVERLAYING SECTION
	SetVariable setvar_Overlay,pos={12,349},size={110,19},proc=SetVarProc_PCA,title="Overlay"
	SetVariable setvar_Overlay,fSize=12,fColor=(61166,61166,61166)
	SetVariable setvar_Overlay,value= root:Package_SLP:PEEMPCA:OverLay
	Button button_CreateColorMap,pos={129,348},size={95,20},proc=ButtonProc_PCA,title="Create color map"
	Button button_CreateColorMap,fSize=10,fColor=(65535,16385,16385)
	CheckBox Check_zProfile,pos={12,581},size={72,15},proc=CheckProc_PCA,title="See z-profile"
	CheckBox Check_zProfile,fColor=(61166,61166,61166),value= 0
	SetVariable SetVar_zProflBin,pos={129,581},size={99,16},proc=SetVarProc_PCA,title="Binning"
	SetVariable SetVar_zProflBin,fSize=10,fColor=(61166,61166,61166)
	SetVariable SetVar_zProflBin,limits={1,inf,1},value= root:Package_SLP:PEEMPCA:zProflBin
	
	//BOTTOM SECTION
	Button Button_ThRanges,pos={120,635},size={140,16},proc=ButtonProc_PCA,title="Adjust threshold ranges..",fSize=10
	Button Button_Export,pos={263,635},size={120,16},proc=ButtonProc_PCA,title="Export results..",fSize=10
	Button Button_Done,pos={387,635},size={80,16},proc=ButtonProc_PCA,title="Done",fSize=10
	
	//CURSOR HOOK
	setwindow SLP_PCA_Panel01,hook(zProfileUpdate)=SLP_PCA_CursorHook
	
	If (Dimsize(SLP_PEEMPCA_ScanListW,0)>0)
		ListBox List_ScansList win=SLP_PCA_Panel01, selRow=SelRow
		SLP_PCA_DisplaySelectedData(SLP_PEEMPCA_ScanListW[SelRow][0])
		Slider slider_Th_PC1,value=str2num(SLP_PEEMPCA_ScanListW[SelRow][4]),win=SLP_PCA_Panel01
		Slider slider_Th_PC2,value=str2num(SLP_PEEMPCA_ScanListW[SelRow][5]),win=SLP_PCA_Panel01
		Slider slider_Th_PC3,value=str2num(SLP_PEEMPCA_ScanListW[SelRow][6]),win=SLP_PCA_Panel01
		Slider slider_Th_PC4,value=str2num(SLP_PEEMPCA_ScanListW[SelRow][7]),win=SLP_PCA_Panel01
	EndIf
	
EndMacro


Function CheckProc_PCA_Export(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_PCA_ExportResults()	
	//Descriptions: A function to put the results from PCA in to a data folder that users have to select during the result export.
	NVAR Export_Projections_Flg=root:Package_SLP:PEEMPCA:Export_Projections_Flg
	NVAR Export_ThresholdImages_Flg=root:Package_SLP:PEEMPCA:Export_ThresholdImages_Flg
	NVAR Export_ColorMap_Flg=root:Package_SLP:PEEMPCA:Export_ColorMap_Flg
	NVAR Export_IntgSpectra_Flg=root:Package_SLP:PEEMPCA:Export_IntgSpectra_Flg
	SVAR ExportName=root:Package_SLP:PEEMPCA:ExportName
	NVAR ExportNo=root:Package_SLP:PEEMPCA:ExportNo
	Wave /T SLP_PEEMPCA_ScanListW=root:Package_SLP:PEEMPCA:SLP_PEEMPCA_ScanListW
	NVAR SelRow=root:Package_SLP:PEEMPCA:SelRow
	String DataName=SLP_PEEMPCA_ScanListW[SelRow][0]
	String DataW_FName=SLP_PEEMPCA_ScanListW[SelRow][1]
	Variable N_PCs=str2num(SLP_PEEMPCA_ScanListW[SelRow][10])
	Wave PCAColorTable=root:Package_SLP:PEEMPCA:PCAColorTable
	
	If (!DataFolderExists(ExportName))	
		NewDataFolder $ExportName
		Variable i=0
		//PROJECTIONS
		If (Export_Projections_Flg)
			ControlInfo /W=SLP_PCA_Panel_Export popup_Projections
			Variable PCs_Sel=V_Value //number of selection in the PopUpMenu (1=All,2=PC1,...) **counting from one!
			If (PCs_Sel>=2)
				Duplicate /O $(DataW_FName+"_Proj"+num2str(PCs_Sel-1)),$("root:"+ExportName+":"+DataName+"_Proj"+num2str(PCs_Sel-1)) /Wave=ExportedProjW
				NewImage ExportedProjW
			Elseif (PCs_Sel==1) //'All' is chosen
				For (i=1;i<=N_PCs;i+=1)
					Duplicate /O $(DataW_FName+"_Proj"+num2str(i)),$("root:"+ExportName+":"+DataName+"_Proj"+num2str(i)) /Wave=ExportedProjW
					NewImage ExportedProjW
				EndFor
			EndIf
		EndIf
		
		//THRESHOLD IMAGES
		If (Export_ThresholdImages_Flg)
			ControlInfo /W=SLP_PCA_Panel_Export popup_ThImages
			Variable THs_Sel=V_Value //number of selection in the PopUpMenu (1=All,2=PC1,...) **counting from one!
			ControlInfo /W=SLP_PCA_Panel_Export popup_ThImageOptions
			String ThImageExportOption=S_Value
			ControlInfo /W=SLP_PCA_Panel_Export popup_ThImageInverse
			//String InverseOption=S_Value
			Variable InverseFlg=V_Value-1 //V_value=1 = No, V_Value=2 = Yes
			If (THs_Sel>=2)
				Duplicate /O $(DataW_FName+"_Proj"+num2str(THs_Sel-1)+"_Bin"),$("root:"+ExportName+":"+DataName+"_Proj"+num2str(THs_Sel-1)+"_Bin") /Wave=ExportedThW
				StrSwitch(ThImageExportOption)
					case "as is": //OverTh = 255, UnderTh = 0, Screen = 64
						If (InverseFlg)
							MatrixOp /O ExportedThW=replace(ExportedThW,0,254)
							MatrixOp /O ExportedThW=replace(ExportedThW,255,0)
							MatrixOp /O ExportedThW=replace(ExportedThW,254,255) //Need some trick
						EndIf
						break
					case "0:1":
						If (!InverseFlg)
							MatrixOp /O ExportedThW=replace(ExportedThW,255,1)  
							MatrixOp /O ExportedThW=replace(ExportedThW,64,0) //Screen = 0
						Else
							MatrixOp /O ExportedThW=replace(ExportedThW,0,1)
							MatrixOp /O ExportedThW=replace(ExportedThW,255,0)  
							MatrixOp /O ExportedThW=replace(ExportedThW,64,0) //Screen = 0
						EndIf
						break
					case "Nan:1": //Has to change the wavetype from I8 to FP32 
						Make /N=(dimsize(ExportedThW,0),dimsize(ExportedThW,1)) $("root:"+ExportName+":"+DataName+"_Proj"+num2str(THs_Sel-1)+"_FP32") /Wave=ExportedThW_FP32
						ExportedThW_FP32=ExportedThW
						Killwaves ExportedThW
						If (!InverseFlg)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,0,NaN)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,255,1)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,64,NaN)
						Else
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,0,1)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,255,NaN)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,64,NaN)
						EndIf
						Wave  ExportedThW=$("root:"+ExportName+":"+DataName+"_Proj"+num2str(THs_Sel-1)+"_FP32")
						break
				EndSwitch
				NewImage ExportedThW
			ElseIf (THs_Sel==1) //'All' is chosen
				For (i=1;i<=N_PCs;i+=1)
					Duplicate /O $(DataW_FName+"_Proj"+num2str(i)+"_Bin"),$("root:"+ExportName+":"+DataName+"_Proj"+num2str(i)+"_Bin") /Wave=ExportedThW
					NewImage ExportedThW
					StrSwitch(ThImageExportOption)
					case "as is": //OverTh = 255, UnderTh = 0, Screen = 64
						If (InverseFlg)
							MatrixOp /O ExportedThW=replace(ExportedThW,0,254)
							MatrixOp /O ExportedThW=replace(ExportedThW,255,0)
							MatrixOp /O ExportedThW=replace(ExportedThW,254,255) //Need some trick
						EndIf
						break
					case "0:1":
						If (!InverseFlg)
							MatrixOp /O ExportedThW=replace(ExportedThW,255,1)  
							MatrixOp /O ExportedThW=replace(ExportedThW,64,0) //Screen = 0
						Else
							MatrixOp /O ExportedThW=replace(ExportedThW,0,1)
							MatrixOp /O ExportedThW=replace(ExportedThW,255,0)  
							MatrixOp /O ExportedThW=replace(ExportedThW,64,0) //Screen = 0
						EndIf
						break
					case "Nan:1": //Has to change the wavetype from I8 to FP32 
						Make /N=(dimsize(ExportedThW,0),dimsize(ExportedThW,1)) $("root:"+ExportName+":"+DataName+"_Proj"+num2str(THs_Sel-1)+"_FP32") /Wave=ExportedThW_FP32
						ExportedThW_FP32=ExportedThW
						Killwaves ExportedThW
						If (!InverseFlg)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,0,NaN)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,255,1)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,64,NaN)
						Else
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,0,1)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,255,NaN)
							MatrixOp /O ExportedThW_FP32=replace(ExportedThW_FP32,64,NaN)
						EndIf
						Wave  ExportedThW=$("root:"+ExportName+":"+DataName+"_Proj"+num2str(THs_Sel-1)+"_FP32")
						break
				EndSwitch
				EndFor
			Endif
		Endif
		
		If (Export_ColorMap_Flg)
			Duplicate /O $(DataW_FName+"_ProjColor"),$("root:"+ExportName+":"+DataName+"_ProjColor") /Wave=ExportedColorW
			NewImage ExportedColorW
			ModifyImage $(DataName+"_ProjColor") cindex= PCAColorTable
		Endif
		
		If (Export_IntgSpectra_Flg)
			Display
			For (i=1;i<=N_PCs;i+=1)
				Duplicate /O $(DataW_FName+"_Proj"+num2str(i)+"_IntgSpctrm"),$("root:"+ExportName+":"+DataName+"_Proj"+num2str(i)+"_IntgSpctrm") /Wave=SpectrumW
				Appendtograph SpectrumW
				Modifygraph rgb($(DataName+"_Proj"+num2str(i)+"_IntgSpctrm") )=(PCAColorTable[i][0],PCAColorTable[i][1],PCAColorTable[i][2])
				Modifygraph lsize=2,mirror=1,minor=1,tick=2
			EndFor
			Legend
		Endif
		
	Else
		DoAlert 0,"Folder: "+ExportName+" already exists. Please choose a new name"
	EndIf
End

Function ButtonProc_PCA_Export(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			StrSwitch (ba.CtrlName)
				case "Button_Export":
					SLP_PCA_ExportResults()
					Dowindow /K SLP_PCA_Panel_Export
					break
				case "Button_Cancel":
					Dowindow /K SLP_PCA_Panel_Export
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function Panel_PCA_Export() : Panel
	Dowindow /K SLP_PCA_Panel_Export
	
	PauseUpdate; Silent 1		// building window...
	NewPanel /N=SLP_PCA_Panel_Export /W=(103,318,740,531)
	ModifyPanel cbRGB=(51664,44236,58982)
	SetDrawLayer UserBack
	SetDrawEnv fsize= 15
	DrawText 10,30,"Principal Component Analysis Export"
	
	SetVariable setvar_ExportName,pos={320,11},size={285,19},bodyWidth=200,title="Export name: "
	SetVariable setvar_ExportName,fSize=12
	SetVariable setvar_ExportName,value= root:Package_SLP:PEEMPCA:ExportName
	
	CheckBox Check_Export_Projections,pos={18,51},size={86,19},proc=CheckProc_PCA_Export,title="Projection",fSize=14
	CheckBox Check_Export_Projections,variable= root:Package_SLP:PEEMPCA:Export_Projections_Flg
	
	
	CheckBox Check_Export_ThImages,pos={18,88},size={136,19},proc=CheckProc_PCA_Export,title="Threshold images"
	CheckBox Check_Export_ThImages,fSize=14
	CheckBox Check_Export_ThImages,variable= root:Package_SLP:PEEMPCA:Export_ThresholdImages_Flg
	CheckBox Check_Export_ColorMap,pos={18,121},size={86,19},proc=CheckProc_PCA_Export,title="Color map"
	CheckBox Check_Export_ColorMap,fSize=14
	CheckBox Check_Export_ColorMap,variable= root:Package_SLP:PEEMPCA:Export_ColorMap_Flg
	CheckBox Check_Export_IntgSpectra,pos={18,153},size={143,19},proc=CheckProc_PCA_Export,title="Integrated spectra"
	CheckBox Check_Export_IntgSpectra,fSize=14
	CheckBox Check_Export_IntgSpectra,variable= root:Package_SLP:PEEMPCA:Export_IntgSpectra_Flg
	PopupMenu popup_Projections,pos={180,51},size={78,20},bodyWidth=60,title="PC:"
	PopupMenu popup_Projections,fSize=10
	PopupMenu popup_Projections,mode=1,popvalue="All",value= #"\"All;PC1;PC2;PC3;PC4;\""
	PopupMenu popup_ThImages,pos={180,87},size={78,20},bodyWidth=60,title="PC:"
	PopupMenu popup_ThImages,fSize=10
	PopupMenu popup_ThImages,mode=1,popvalue="All",value= #"\"All;PC1;PC2;PC3;PC4;\""
	PopupMenu popup_ThImageOptions,pos={271,87},size={163,20},bodyWidth=120,title="Options:"
	PopupMenu popup_ThImageOptions,fSize=10
	PopupMenu popup_ThImageOptions,mode=1,popvalue="0:1",value= #"\"as is;0:1;NaN:1;\""
	PopupMenu popup_ThImageInverse,pos={448,87},size={177,20},bodyWidth=137,title="Inverse:"
	PopupMenu popup_ThImageInverse,fSize=10
	PopupMenu popup_ThImageInverse,mode=3,popvalue="No",value= #"\"No;Yes;\""
	
	Button Button_Export,pos={412,185},size={120,20},proc=ButtonProc_PCA_Export,title="Export"
	Button Button_Export,fSize=12
	Button Button_Cancel,pos={536,185},size={80,20},proc=ButtonProc_PCA_Export,title="Cancel"
	Button Button_Cancel,fSize=12
EndMacro

Function SetVarProc_PCA_Export(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		//case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			//SVAR Export_Name=root:Package_SLP:PEEMPCA:Export_Name
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function Panel_Util_ScanTimeCalc() : Panel
	//DESCRIPTIONS: Panel to help calculate the time required for DXPS,IXPS,ARPES,LEEMIV scans.
	//CREATED: 13.01.2020
	
	If (!DatafolderExists("root:Package_SLP:Util:CalcScanTime"))
		SLPA_Util_CalcScanTime_init()
	Endif
	
	Dowindow /K ScanTimeCale_Panel
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(509,229,964,394) /N=ScanTimeCale_Panel
	ModifyPanel cbRGB=(51664,44236,58982)
	SetDrawLayer UserBack
	SetDrawEnv fsize= 26
	DrawText 6,36,"Scan time calculator"
	SetVariable setvar_EStart,pos={4,36},size={160,15},proc=SetVarProc_Util_CalScanTime,title="Start energy"
	SetVariable setvar_EStart,value= root:Package_SLP:Util:CalcScanTime:EStart
	SetVariable setvar_EStop,pos={4,55},size={160,15},proc=SetVarProc_Util_CalScanTime,title="Stop energy"
	SetVariable setvar_EStop,value= root:Package_SLP:Util:CalcScanTime:EStop
	SetVariable setvar_EStep,pos={4,74},size={160,15},proc=SetVarProc_Util_CalScanTime,title="Energy step"
	SetVariable setvar_EStep,value= root:Package_SLP:Util:CalcScanTime:EStep, limits={-inf,inf,0.1}
	SetVariable setvar_ExposureTime,pos={4,93},size={160,15},proc=SetVarProc_Util_CalScanTime,title="Exposure time (ms)"
	SetVariable setvar_ExposureTime,value= root:Package_SLP:Util:CalcScanTime:ExposureTime, limits={-inf,inf,500}
	SetVariable setvar_FrameAvg,pos={4,113},size={160,15},proc=SetVarProc_Util_CalScanTime,title="Frame average"
	SetVariable setvar_FrameAvg,value= root:Package_SLP:Util:CalcScanTime:FrameAvg
	SetVariable setvar_TotalHrs,pos={178,105},size={264,22},title="Total Hours: "
	SetVariable setvar_TotalHrs,fSize=14,format="%0.2f"
	SetVariable setvar_TotalHrs,valueBackColor=(52428,52428,52428)
	SetVariable setvar_TotalHrs,limits={-inf,inf,0},value= root:Package_SLP:Util:CalcScanTime:TotalHrs,noedit= 1
	SetVariable setvar_ScanParamText,pos={178,33},size={265,22},proc=SetVarProc_Util_CalScanTime,title="Scan text"
	SetVariable setvar_ScanParamText,fSize=14
	SetVariable setvar_ScanParamText,value= root:Package_SLP:Util:CalcScanTime:ScanParamTxt
	SetVariable setvar_TotalMin,pos={178,64},size={264,30},title="Total Minutes: "
	SetVariable setvar_TotalMin,fSize=20,format="%0.2f"
	SetVariable setvar_TotalMin,valueBackColor=(52428,52428,52428)
	SetVariable setvar_TotalMin,limits={-inf,inf,0},value= root:Package_SLP:Util:CalcScanTime:TotalMin,noedit= 1
	Button button_Done,pos={384,140},size={50,20},proc=ButtonProc_Util_CalcScanTime,title="Done"
	Button button_Done,fColor=(61166,61166,61166)
	Button button_Save,pos={5,140},size={120,20},proc=ButtonProc_Util_CalcScanTime,title="Save scan text"
	Button button_Save,fColor=(61166,61166,61166)
	PopupMenu popup_ScanList,pos={134,140},size={77,20},proc=PopMenuProc_Util_ScanTimeCalc,title="Scan list"
	PopupMenu popup_ScanList,mode=0,value= #"root:Package_SLP:Util:CalcScanTime:ScanParamList"
	Button button_Clear,pos={220,140},size={80,20},proc=ButtonProc_Util_CalcScanTime,title="Clear list"
	Button button_Clear,fColor=(61166,61166,61166)
EndMacro

Function SLPA_Util_CalcScanTime_init()
	string Current_folder=getdatafolder(1)
	
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:Util
	NewDataFolder /O root:Package_SLP:Util:CalcScanTime
	
	//Global variable
	SetDataFolder root:Package_SLP:Util:CalcScanTime
	Variable /G EStart=50
	Variable /G EStop=605
	Variable /G EStep=1
	Variable /G ExposureTime=1000
	Variable /G FrameAvg=2
	Variable /G TotalMin=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60
	Variable /G TotalHrs=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60/60
	
	String /G ScanParamTxt=""
	String /G ScanParamList=""
	
	SetDataFolder $Current_folder
End

Function SetVarProc_Util_CalScanTime(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR EStart=root:Package_SLP:Util:CalcScanTime:EStart
			NVAR EStop=root:Package_SLP:Util:CalcScanTime:EStop
			NVAR EStep=root:Package_SLP:Util:CalcScanTime:EStep
			NVAR ExposureTime=root:Package_SLP:Util:CalcScanTime:ExposureTime
			NVAR FrameAvg=root:Package_SLP:Util:CalcScanTime:FrameAvg
			NVAR TotalHrs=root:Package_SLP:Util:CalcScanTime:TotalHrs
			NVAR TotalMin=root:Package_SLP:Util:CalcScanTime:TotalMin
			
			SVAR ScanParamTxt=root:Package_SLP:Util:CalcScanTime:ScanParamTxt
			
			strswitch(sva.CtrlName)	// string switch
				case "setvar_EStart": 
				case "setvar_EStop": 
				case "setvar_EStep": 
				case "setvar_ExposureTime": 
				case "setvar_FrameAvg": 
					TotalHrs=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60/60
					TotalMin=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60
					ScanParamTxt=num2str(EStart)+","+num2str(EStop)+","+num2str(EStep)+","+num2str(ExposureTime)+","+num2str(FrameAvg)
					break
				case "setvar_ScanParamText":
					EStart=str2num(stringfromlist(0,ScanParamTxt,","))
					EStop=str2num(stringfromlist(1,ScanParamTxt,","))
					EStep=str2num(stringfromlist(2,ScanParamTxt,","))
					ExposureTime=str2num(stringfromlist(3,ScanParamTxt,","))
					FrameAvg=str2num(stringfromlist(4,ScanParamTxt,","))
					TotalMin=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60
					TotalHrs=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60/60
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_Util_CalcScanTime(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	SVAR ScanParamTxt=root:Package_SLP:Util:CalcScanTime:ScanParamTxt
	SVAR ScanParamList=root:Package_SLP:Util:CalcScanTime:ScanParamList
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				case "button_Save":
					ScanParamList+=ScanParamTxt+";"
					break
					
				case "button_Clear":
					ScanParamList=""
					break
					
				case "button_Done":
					Dowindow /K ScanTimeCale_Panel
					break
				
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function PopMenuProc_Util_ScanTimeCalc(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			NVAR EStart=root:Package_SLP:Util:CalcScanTime:EStart
			NVAR EStop=root:Package_SLP:Util:CalcScanTime:EStop
			NVAR EStep=root:Package_SLP:Util:CalcScanTime:EStep
			NVAR ExposureTime=root:Package_SLP:Util:CalcScanTime:ExposureTime
			NVAR FrameAvg=root:Package_SLP:Util:CalcScanTime:FrameAvg
			NVAR TotalHrs=root:Package_SLP:Util:CalcScanTime:TotalHrs
			NVAR TotalMin=root:Package_SLP:Util:CalcScanTime:TotalMin
			
			SVAR ScanParamTxt=root:Package_SLP:Util:CalcScanTime:ScanParamTxt
			SVAR ScanParamList=root:Package_SLP:Util:CalcScanTime:ScanParamList
			ScanParamTxt=popStr
			
			EStart=str2num(stringfromlist(0,ScanParamTxt,","))
			EStop=str2num(stringfromlist(1,ScanParamTxt,","))
			EStep=str2num(stringfromlist(2,ScanParamTxt,","))
			ExposureTime=str2num(stringfromlist(3,ScanParamTxt,","))
			FrameAvg=str2num(stringfromlist(4,ScanParamTxt,","))
	
			TotalMin=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60
			TotalHrs=(EStop-EStart)/EStep*ExposureTime*FrameAvg/1000/60/60
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_NEX_FindDataRow(ScanName)
	//DESCRIPTIONS: Use to find DataRow in ScanListW from the ScanName. Return DataRow
	//CREATED: xx.12.2019
	String ScanName
	Variable DataRow
	WAVE /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW 
	FindValue /TEXT=ScanName /TXOP=6 SLP_NEX_ScanDisplayListW
	variable col=floor(V_value/dimsize(SLP_NEX_ScanDisplayListW,0))
	DataRow=V_value-col*dimsize(SLP_NEX_ScanDisplayListW,0)
	Return DataRow
End

Function SLP_Util_EqualizeStep2D(StepSize,OrgW_FName,xW_FName,Col_Flg,Overwrite_Flg)
	//DESCRIPTIONS: Interpolate 2D data with variable steps into one with constant step & wave scaling. 
	//	The result is a new wave with "_xAdj" suffix with Igor's x scaling if Overwrite_Flg=0.
	//**NEED TO TEST Col_Flg option**
	//CREATED: xx.12.2019
	
	Variable StepSize //The final step size
	String OrgW_FName
	String xW_FName //x wave which tells the variable step
	Variable Col_Flg //Flag for interpolating horizontally instead
	Variable Overwrite_Flg //Flag for overwriting the orginal file, otherwise will create wave with _xAdj suffix
	
	String ResultW_FName=OrgW_FName+"_xAdj"
	
	Wave OrgW=$OrgW_FName
	Wave xW=$xW_Fname
	
	Variable xStart=xW[0]
	Variable xEnd=xW[dimsize(xW,0)-1]
	Variable nStep=Ceil((xEnd-xStart)/StepSize)
	
	Variable N_Col=dimsize(OrgW,1)
	Variable N_Row=dimsize(OrgW,0)
	Variable i=0
	
	If (!Col_Flg) //interpolate vertically (row)
		Make /O /N=(nStep,N_Col) $ResultW_FName /Wave=ResultW
		Make /O /N=(nStep) $(ResultW_FName+"1Col") /Wave=ResultW1Col
		SetScale /P x,xStart,StepSize,ResultW
		SetScale /P x,xStart,StepSize,ResultW1Col
		Make /O/N=(dimsize(OrgW,0)) $(OrgW_FName+"_1Col") /Wave=OrgW1Col
		For (i=0;i<N_Col;i+=1)
			OrgW1Col[]=OrgW[p][i]
			Interpolate2 /i=3 /Y=ResultW1Col xW,OrgW1Col
			// /i=3 use the x scaling of the ResultW for interpolation. Very convenient.
			ResultW[][i]=ResultW1Col[p]
		EndFor
		Killwaves OrgW1Col,ResultW1Col
	Elseif (Col_Flg) //interpolate horizontally (column)
		Make /O /N=(N_Row,nStep) $ResultW_FName /Wave=ResultW
		Make /O /N=(nStep) $(ResultW_FName+"1Col") /Wave=ResultW1Col
		SetScale /P y,xStart,StepSize,ResultW
		SetScale /P x,xStart,StepSize,ResultW1Col
		Make /O/N=(dimsize(OrgW,1)) $(OrgW_FName+"_1Col") /Wave=OrgW1Col
		For (i=0;i<N_Row;i+=1)
			OrgW1Col[]=OrgW[i][p]
			Interpolate2 /i=3 /Y=ResultW1Col xW,OrgW1Col
			// /i=3 use the x scaling of the ResultW for interpolation. Very convenient.
			ResultW[i][]=ResultW1Col[q]
		EndFor
		Killwaves OrgW1Col,ResultW1Col
	Endif
	
	If (Overwrite_Flg)
		Duplicate /O ResultW,OrgW
		Killwaves ResultW
	EndIf
End



Function SLP_MGFit_ProcData(DataName,PreEdgeE,PostEdgeE,EShift)
	//DESCRIPTIONS: Put pre-edge to zero and post-edge to one. Shift wave scaling to calibrate the energy
	//CREATED: xx.12.2019
	
	String DataName //Name of the data (scan) in MGFit
	Variable PreEdgeE //Energy for pre-edge
	Variable PostEdgeE //Energy for post-edge
	Variable EShift //Energy shift (+ = move spectrum to higher energy)
	
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]

	String DataW_FName=DataLocation+DataName	//Raw data
	String BgW_FName=DataW_FName+"_BG"		//Background
	String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
	String Data_GssW_FName=DataW_FName+"_Gss"	//Guess curve
	String FitW_FName=Data_nBGW_FName+"_Fit"
	
	Wave DataW=$DataW_FName
	Wave Data_nBGW=$Data_nBGW_FName
	
	Variable PreEdgeLevel=DataW(PreEdgeE)
	DataW-=PreEdgeLevel
	Variable PostEdgeLevel=DataW(PostEdgeE)
	DataW/=PostEdgeLevel
	Data_nBGW=DataW
	
	Variable NewEStart=DimOffset(DataW, 0)+EShift
	Variable EStep=DimDelta(DataW, 0)
	SetScale /P x,NewEStart,EStep,DataW
	SetScale /P x,NewEStart,EStep,$BgW_FName
	SetScale /P x,NewEStart,EStep,$Data_nBGW_FName
	SetScale /P x,NewEStart,EStep,$Data_GssW_FName
	SetScale /P x,NewEStart,EStep,$FitW_FName
End


Function SLP_AEYNEX_Init()
	//DESCRIPTIONS: Initialize AEYNEX
	//CREATED: xx.12.2019
	
	string Current_folder=getdatafolder(1)
	
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:AEYNEX
	NewDataFolder /O root:Package_SLP:AEYNEX:Settings
	
	Make /O/N=2 root:Package_SLP:AEYNEX:AEYNEX_xW /wave=AEYNEX_xW
	Make /O/N=2 root:Package_SLP:AEYNEX:AEYNEX_yW /wave=AEYNEX_yW
	
	AEYNEX_xW={210,351}
	AEYNEX_yW={460,60}
	
	//Global variable
	SetDataFolder root:Package_SLP:AEYNEX:Settings
	Variable /G LPWidth=90
	Variable /G DataPoint1=10 //
	Variable /G DataPoint2=110 //
	Variable /G Energy1=0
	Variable /G Energy2=0
	Variable /G AEYNEX_Offset=0
	Variable /G AEYNEX_Width=200
	Variable /G StepSize=0.2
	String /G NEXTxtDataW_FName
	variable /G medianSmoothPts=3
	String /G ScanName
	
	SetDataFolder $Current_folder
End

Function SLP_AEYNEX_DetectDuplicateStep(NEXTxtDataW_FName)
	//DESCRIPTIONS: Remove duplicate steps in .txt file from 2nd version of NEXAFS LabVIEW (ver. from 2019). 
	//		This bug cause the number of data points to be larger than the actual raw image frames (which are not duplicate)
	//		This process should be run before extracting 2D AEY NEXAFS so that the number of rows for 2D is equal to the .txt.
	//CREATED: xx.12.2019
	
	String NEXTxtDataW_FName
	Wave NEXTxtDataW=$NEXTxtDataW_FName
	
	Variable i=0
	Variable hvValuePrev=0
	Variable hvValueNow=0
	For (i=0;i<dimsize(NEXTxtDataW,0);i+=1)
		hvValueNow=NEXTxtDataW[i][0]
		If (hvValueNow==hvValuePrev)
			DeletePoints i,1, NEXTxtDataW
		Endif
		hvValuePrev=hvValueNow
	EndFor
End

Function SLP_AEYNEX_ConvertUX()
	//DESCRIPTIONS: UX for conversion from regular NEX to AEYNEX in SLPA NEX Panel. Perform on the selected Scan.
	//		- AEYNEX conversion is flagged in ScanListW Col 14 ("1")
	//		- *Create large VOL wave from NEX image series. 
	//CREATED: 05.01.2020
	
	If (!DatafolderExists("root:Package_SLP:AEYNEX"))
		SLP_AEYNEX_Init()
	Endif
	
	ControlInfo /W=SLP_NEX_Panel_01 List0
	Variable DataRow=V_Value 
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW 
	NVAR LPWidth=root:Package_SLP:AEYNEX:Settings:LPWidth
	NVAR AEYNEX_Offset=root:Package_SLP:AEYNEX:Settings:AEYNEX_Offset
	NVAR AEYNEX_Width=root:Package_SLP:AEYNEX:Settings:AEYNEX_Width
	NVAR StepSize=root:Package_SLP:AEYNEX:Settings:StepSize
	NVAR Energy1=root:Package_SLP:AEYNEX:Settings:Energy1
	NVAR Energy2=root:Package_SLP:AEYNEX:Settings:Energy2
	NVAR DataPoint1=root:Package_SLP:AEYNEX:Settings:DataPoint1
	NVAR DataPoint2=root:Package_SLP:AEYNEX:Settings:DataPoint2
	NVAR medianSmoothPts=root:Package_SLP:AEYNEX:Settings:medianSmoothPts
	SVAR NEXTxtDataW_FName=root:Package_SLP:AEYNEX:Settings:NEXTxtDataW_FName
	SVAR ScanName=root:Package_SLP:AEYNEX:Settings:ScanName
	Wave AEYNEX_xW=root:Package_SLP:AEYNEX:AEYNEX_xW
	Wave AEYNEX_yW=root:Package_SLP:AEYNEX:AEYNEX_yW
	
	//Use SVARs to fix the data.
	NEXTxtDataW_FName=SLP_NEX_ScanListW[DataRow][2]+":"+SLP_NEX_ScanListW[DataRow][3]
	ScanName=SLP_NEX_ScanListW[DataRow][3]
	
	//Remove duplicate step
	SLP_AEYNEX_DetectDuplicateStep(NEXTxtDataW_FName)
	SLP_NEX_SplitColumn(SLP_NEX_ScanListW[DataRow][2],ScanName,DataRow)
	
	//Load and create NEX volume
	String DataPath=SLP_NEX_ScanListW[DataRow][0] //directory to keep the raw NEXAFS image files
	SLP_Util_LoadMultImg2Vol(DataPath,NEXTxtDataW_FName+"_Vol",0,1)
	
	//Make AEYNEX
	SLP_AEYNEX_Convert3(ScanName)
	
	//If not the first time, update global variables and waves to the previously used values
	If (!stringmatch(SLP_NEX_ScanListW[DataRow][14],"1"))
		AEYNEX_xW[0]=str2num(SLP_NEX_ScanListW[DataRow][15])
		AEYNEX_yW[0]=str2num(SLP_NEX_ScanListW[DataRow][16])
		AEYNEX_xW[1]=str2num(SLP_NEX_ScanListW[DataRow][17])
		AEYNEX_yW[1]=str2num(SLP_NEX_ScanListW[DataRow][18])
		StepSize=str2num(SLP_NEX_ScanListW[DataRow][19])
		AEYNEX_Offset=str2num(SLP_NEX_ScanListW[DataRow][20])
		AEYNEX_Width=str2num(SLP_NEX_ScanListW[DataRow][21])
		LPWidth=str2num(SLP_NEX_ScanListW[DataRow][22])
		medianSmoothPts=str2num(SLP_NEX_ScanListW[DataRow][23])
	Endif
	
	//Launch AEYNEX panel
	Panel_NEX_AEYNEX()
	
	//Update ScanListW
	SLP_NEX_ScanListW[DataRow][14]="1"
End

Function Panel_NEX_AEYNEX():Panel
	//DESCRIPTIONS: Panel for AEYNEX. 
	//		- The functionality is fixed to the selected scan when AEY_ConvertUX is called by using SVAR ScanName.
	//		- User should click 'Finish' after adjusting parameter so that the large VOL wave is killed.
	//CREATED: 05.01.2020
	Dowindow /K AEYNEX_Panel
	NewPanel /W=(32,60,480,660) /N=AEYNEX_Panel
	
	NVAR LPWidth=root:Package_SLP:AEYNEX:Settings:LPWidth
	NVAR AEYNEX_Offset=root:Package_SLP:AEYNEX:Settings:AEYNEX_Offset
	NVAR AEYNEX_Width=root:Package_SLP:AEYNEX:Settings:AEYNEX_Width
	NVAR Energy1=root:Package_SLP:AEYNEX:Settings:Energy1
	NVAR Energy2=root:Package_SLP:AEYNEX:Settings:Energy2
	NVAR DataPoint1=root:Package_SLP:AEYNEX:Settings:DataPoint1
	NVAR DataPoint2=root:Package_SLP:AEYNEX:Settings:DataPoint2
	NVAR medianSmoothPts=root:Package_SLP:AEYNEX:Settings:medianSmoothPts
	SVAR NEXTxtDataW_FName=root:Package_SLP:AEYNEX:Settings:NEXTxtDataW_FName
	SVAR ScanName=root:Package_SLP:AEYNEX:Settings:ScanName
	Wave AEYNEX_xW=root:Package_SLP:AEYNEX:AEYNEX_xW
	Wave AEYNEX_yW=root:Package_SLP:AEYNEX:AEYNEX_yW
	
	SetDrawLayer UserBack
	SetDrawEnv fsize= 16
	DrawText 18,23,"SLPA Auger electron yield NEXAFS"
	SetDrawEnv fsize= 14
	DrawText 195,70,"Dispersive line"
	SetDrawEnv fsize= 14
	DrawText 20,204,"2D AEY NEXAFS"
	SetVariable setvar_ScanName,pos={20,28},size={200,23},title="Data:",fSize=12
	SetVariable setvar_ScanName,valueBackColor=(65535,49157,16385)
	SetVariable setvar_ScanName,value= root:Package_SLP:AEYNEX:Settings:ScanName,noedit= 2

	//RAW NEX (DISP.LINE) DISPLAY
	Display/W=(22,51,179,179)/HOST=AEYNEX_Panel /N=NEXRAW
	AppendImage /W=AEYNEX_Panel#NEXRAW $(NEXTxtDataW_FName+"_Vol_Intg")
	Appendtograph /W=AEYNEX_Panel#NEXRAW AEYNEX_yW vs AEYNEX_xW
	ModifyGraph /W=AEYNEX_Panel#NEXRAW margin=5,tick=3,mirror=2,noLabel=2
	SetDrawLayer /W=AEYNEX_Panel#NEXRAW UserFront
	SetDrawEnv /W=AEYNEX_Panel#NEXRAW xcoord= bottom,ycoord= left,linefgc= (0,65535,0)
	DrawLine 20,20,20+LPWidth,20
	//DISP LINE EDIT
	Button DispLineDraw,pos={193,72},size={50,20},proc=ButtonProc_AEYNEX,title="Draw",fSize=12
	Button DispLineEdit,pos={250,72},size={50,20},proc=ButtonProc_AEYNEX,title="Edit",fSize=12
	Button DispLineSave,pos={308,72},size={50,20},proc=ButtonProc_AEYNEX,title="Save",fSize=12
	SetVariable LPWidth,pos={193,97},size={150,15},proc=SetVarProc_AEYNEX,title="Line profile width (px)"
	SetVariable LPWidth,value= root:Package_SLP:AEYNEX:Settings:LPWidth
	
	//2D AEYNEX DISPLAY
	Display/W=(17,225,431,382)/HOST=AEYNEX_Panel /N=AEYNEX2D
	AppendImage /W=AEYNEX_Panel#AEYNEX2D $(NEXTxtDataW_FName+"_2D_xAdj")
	Label /W=AEYNEX_Panel#AEYNEX2D bottom "Photon energy (eV)"
	
	Variable DataHeight=dimsize($(NEXTxtDataW_FName+"_xAdjW"),1)
	setdrawlayer /W=AEYNEX_Panel#AEYNEX2D UserFront
	drawaction /W=AEYNEX_Panel#AEYNEX2D /L=UserFront delete
	SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=prel,ycoord=left,lineFgc=(65535,65535,0)
	Drawline /W=AEYNEX_Panel#AEYNEX2D 0,DataHeight/2+AEYNEX_Offset,1,DataHeight/2+AEYNEX_Offset
	SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=prel,ycoord=left,lineFgc=(10000,10000,65535),dash=3
	Drawline /W=AEYNEX_Panel#AEYNEX2D 0,DataHeight/2+AEYNEX_Offset+AEYNEX_Width/2,1,DataHeight/2+AEYNEX_Offset+AEYNEX_Width/2
	SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=prel,ycoord=left,lineFgc=(10000,10000,65535),dash=3
	Drawline /W=AEYNEX_Panel#AEYNEX2D 0,DataHeight/2+AEYNEX_Offset-AEYNEX_Width/2,1,DataHeight/2+AEYNEX_Offset-AEYNEX_Width/2
	
	setdrawlayer /W=AEYNEX_Panel#AEYNEX2D ProgFront
	drawaction /W=AEYNEX_Panel#AEYNEX2D /L=ProgFront delete
	SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=bottom,ycoord=prel,lineFgc=(65535,0,0)
	Drawline /W=AEYNEX_Panel#AEYNEX2D Energy1,0,Energy1,1
	SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=bottom,ycoord=prel,lineFgc=(65535,0,0)
	Drawline /W=AEYNEX_Panel#AEYNEX2D Energy2,0,Energy2,1
	
	//GLITCH REMOVAL AND STEP SIZE FOR 2D AEY NEXAFS
	Button RemoveGlitch,pos={191,166},size={240,20},proc=ButtonProc_AEYNEX,title="Remove glitch",fSize=12
	SetVariable DataPoint1,pos={188,190},size={120,15},proc=SetVarProc_AEYNEX,title="Data point1"
	SetVariable DataPoint1,valueBackColor=(61166,61166,61166)
	SetVariable DataPoint1,limits={-inf,inf,0},value= root:Package_SLP:AEYNEX:Settings:DataPoint1,noedit= 1
	SetVariable DataPoint2,pos={314,190},size={120,15},proc=SetVarProc_AEYNEX,title="Data point2"
	SetVariable DataPoint2,valueBackColor=(61166,61166,61166)
	SetVariable DataPoint2,limits={-inf,inf,0},value= root:Package_SLP:AEYNEX:Settings:DataPoint2,noedit= 1
	SetVariable Energy1,pos={188,206},size={120,15},proc=SetVarProc_AEYNEX,title="Start at (eV)"
	SetVariable Energy1,value= root:Package_SLP:AEYNEX:Settings:Energy1
	SetVariable Energy2,pos={314,206},size={120,15},proc=SetVarProc_AEYNEX,title="Stop at (eV)"
	SetVariable Energy2,value= root:Package_SLP:AEYNEX:Settings:Energy2
	
	SetVariable StepSize,pos={19,206},size={150,15},proc=SetVarProc_AEYNEX,title="Step size (eV)"
	SetVariable StepSize,value= root:Package_SLP:AEYNEX:Settings:StepSize
	
	Button AEYNEX2DPlot,pos={381,385},size={50,20},proc=ButtonProc_AEYNEX,title="Plot",fSize=12
	
	//CREATE 1D AEYNEX FROM 2D AEYNEX
	SetVariable AEYOffset,pos={21,390},size={150,15},proc=SetVarProc_AEYNEX,title="Offset (px)"
	SetVariable AEYOffset,limits={-inf,inf,10},value= root:Package_SLP:AEYNEX:Settings:AEYNEX_Offset
	SetVariable AEYWidth,pos={181,390},size={150,15},proc=SetVarProc_AEYNEX,title="Width (px)"
	SetVariable AEYWidth,limits={-inf,inf,10},value= root:Package_SLP:AEYNEX:Settings:AEYNEX_Width
	
	Display/W=(16,416,429,563)/HOST=AEYNEX_Panel /N=AEYNEX  
	Appendtograph /W=AEYNEX_Panel#AEYNEX  $(NEXTxtDataW_FName+"_ROI1") vs $(NEXTxtDataW_FName+"_hv")
	ModifyGraph /W=AEYNEX_Panel#AEYNEX tick=2, mirror=1,minor=1
	Label /W=AEYNEX_Panel#AEYNEX bottom "Photon energy (eV)"
	
	//SMOOTH 1D AEYNEX
	PopupMenu AEYNEX_Smooth,pos={15,568},size={200,20},bodyWidth=80,proc=PopMenuProc_AEYNEX,title="Points to smooth (median)"
	PopupMenu AEYNEX_Smooth,popvalue="5",value= #"\"None;3;5;7\""
	PopupMenu AEYNEX_Smooth,mode=((medianSmoothPts+1)/2)
	
	//DONE
	Button Done,pos={380,570},size={60,20},proc=ButtonProc_AEYNEX,title="Finish",fSize=12
	
EndMacro

Function ButtonProc_AEYNEX(ba) : ButtonControl
	//DESCRIPTIONS:  ButtonProc for AEYNEX
	//CREATED: 05.01.2020

	STRUCT WMButtonAction &ba
	SVAR ScanName=root:Package_SLP:AEYNEX:Settings:ScanName
	SVAR NEXTxtDataW_FName=root:Package_SLP:AEYNEX:Settings:NEXTxtDataW_FName
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				case "DispLineDraw":
					SetDataFolder root:Package_SLP:AEYNEX:
					GraphWaveDraw /O/W=AEYNEX_Panel#NEXRAW AEYNEX_yW,AEYNEX_xW
					SetDataFolder root:
					break
				case "DispLineEdit":
					GraphWaveEdit /NI/W=AEYNEX_Panel#NEXRAW AEYNEX_yW
					break
				case "DispLineSave":
					GraphNormal /W=AEYNEX_Panel#NEXRAW
					SLP_AEYNEX_Convert3(ScanName)
					break
				case "RemoveGlitch": //Remove glitches in 2D AEYNEX data (doesn't affect the 1D extraction)
					SLP_AEYNEX_Remove2DGlitch()
					break
				case "Done": //When user finishes - click done to kill VOL wave and display selected scan
					DoWindow /K AEYNEX_Panel
					Killwaves $(NEXTxtDataW_FName+"_Vol")
					Variable SelRow=SLP_NEX_FindDataRow(ScanName)
					SLP_NEX_PlotScan(SelRow)
					break
			EndSwitch
			
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_AEYNEX(sva) : SetVariableControl
	//DESCRIPTIONS: SetVarProc for AEYNEX
	//CREATED: 05.01.2020
	
	STRUCT WMSetVariableAction &sva
	
	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			NVAR LPWidth=root:Package_SLP:AEYNEX:Settings:LPWidth
			NVAR AEYNEX_Offset=root:Package_SLP:AEYNEX:Settings:AEYNEX_Offset
			NVAR AEYNEX_Width=root:Package_SLP:AEYNEX:Settings:AEYNEX_Width
			NVAR Energy1=root:Package_SLP:AEYNEX:Settings:Energy1
			NVAR Energy2=root:Package_SLP:AEYNEX:Settings:Energy2
			NVAR DataPoint1=root:Package_SLP:AEYNEX:Settings:DataPoint1
			NVAR DataPoint2=root:Package_SLP:AEYNEX:Settings:DataPoint2
			SVAR NEXTxtDataW_FName=root:Package_SLP:AEYNEX:Settings:NEXTxtDataW_FName
			SVAR ScanName=root:Package_SLP:AEYNEX:Settings:ScanName
			strswitch(sva.CtrlName)	// string switch
				case "LPWidth": //For crateing 2D AEYNEX from dispersive line in AEYNEX image series (VOL wave)
					setdrawlayer /W=AEYNEX_Panel#NEXRAW UserFront
					drawaction /W=AEYNEX_Panel#NEXRAW /L=UserFront delete
					setdrawenv /W=AEYNEX_Panel#NEXRAW xcoord=bottom,ycoord=left,lineFgc=(0,65535,0)
					Drawline /W=AEYNEX_Panel#NEXRAW 20,20,20+LPWidth,20
					SLP_AEYNEX_Convert3(ScanName)
					break
				case "AEYOffset": //For 1D AEYNEX creation
				case "AEYWidth":
					Wave AEYNEX2D_xAdjW=$(NEXTxtDataW_FName+"_2D_xAdj")
					Variable DataHeight=dimsize(AEYNEX2D_xAdjW,1)
					setdrawlayer /W=AEYNEX_Panel#AEYNEX2D UserFront
					drawaction /W=AEYNEX_Panel#AEYNEX2D /L=UserFront delete
					SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=prel,ycoord=left,lineFgc=(65535,65535,0)
					Drawline /W=AEYNEX_Panel#AEYNEX2D 0,DataHeight/2+AEYNEX_Offset,1,DataHeight/2+AEYNEX_Offset
					SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=prel,ycoord=left,lineFgc=(10000,10000,65535),dash=3
					Drawline /W=AEYNEX_Panel#AEYNEX2D 0,DataHeight/2+AEYNEX_Offset+AEYNEX_Width/2,1,DataHeight/2+AEYNEX_Offset+AEYNEX_Width/2
					SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=prel,ycoord=left,lineFgc=(10000,10000,65535),dash=3
					Drawline /W=AEYNEX_Panel#AEYNEX2D 0,DataHeight/2+AEYNEX_Offset-AEYNEX_Width/2,1,DataHeight/2+AEYNEX_Offset-AEYNEX_Width/2
					SLP_AEYNEX_Convert3(ScanName)
					break
				case "Energy1": //For glitches removal
				case "Energy2":
					setdrawlayer /W=AEYNEX_Panel#AEYNEX2D ProgFront
					drawaction /W=AEYNEX_Panel#AEYNEX2D /L=ProgFront delete
					SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=bottom,ycoord=prel,lineFgc=(65535,0,0)
					Drawline /W=AEYNEX_Panel#AEYNEX2D Energy1,0,Energy1,1
					SetDrawEnv /W=AEYNEX_Panel#AEYNEX2D  xcoord=bottom,ycoord=prel,lineFgc=(65535,0,0)
					Drawline /W=AEYNEX_Panel#AEYNEX2D Energy2,0,Energy2,1
					FindLevel /Q $(NEXTxtDataW_FName+"_hv"),Energy1
					DataPoint1=round(V_LevelX)
					FindLevel /Q $(NEXTxtDataW_FName+"_hv"),Energy2
					DataPoint2=round(V_LevelX)
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function PopMenuProc_AEYNEX(pa) : PopupMenuControl
	//DESCRIPTIONS: PopMenuProc for AEYNEX (smoothing 1D AEYNEX result)
	//CREATED: 05.01.2020
	
	STRUCT WMPopupAction &pa
	NVAR medianSmoothPts=root:Package_SLP:AEYNEX:Settings:medianSmoothPts
	SVAR ScanName=root:Package_SLP:AEYNEX:Settings:ScanName
	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			strswitch(pa.CtrlName)	// string switch
				case "AEYNEX_Smooth":
					strswitch(popStr)	// string switch
						case "None":
							medianSmoothPts=1
							break
						case "3":
							medianSmoothPts=3
							break
						case "5":
							medianSmoothPts=5
							break
						case "7":
							medianSmoothPts=7
							break	
					
					EndSwitch
					SLP_AEYNEX_Convert3(ScanName)
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_AEYNEX_Remove2DGlitch()
	//DESCRIPTIONS:  Remove glitches in 2D AEYNEX data (doesn't affect the 1D extraction)
	//		- Glitch is from a bug in NEX LabVIEW program that moves grating too slowly sometimes. Happened from late 2019.
	//CREATED: 05.01.2020
	
	SVAR NEXTxtDataW_FName=root:Package_SLP:AEYNEX:Settings:NEXTxtDataW_FName 
	SVAR ScanName=root:Package_SLP:AEYNEX:Settings:ScanName
	NVAR DataPoint1=root:Package_SLP:AEYNEX:Settings:DataPoint1 //Data point for the start of fine scan
	NVAR DataPoint2=root:Package_SLP:AEYNEX:Settings:DataPoint2 //Data point for the end of fine scan
	NVAR StepSize=root:Package_SLP:AEYNEX:Settings:StepSize
	Wave AEYNEX_2DW=$(NEXTxtDataW_FName+"_2D")
	
	Duplicate /O/R=[DataPoint1,DataPoint2][] AEYNEX_2DW,$(NEXTxtDataW_FName+"_Glitch") /Wave=AEYNEX_Glitch
	ImageFilter /N=(5)/P=1 median AEYNEX_Glitch
	AEYNEX_2DW[DataPoint1,DataPoint2][]=AEYNEX_Glitch[p-DataPoint1][q]
	SLP_Util_EqualizeStep2D(StepSize,NEXTxtDataW_FName+"_2D",NEXTxtDataW_FName+"_hv",0,0)
	
	Duplicate /O $(NEXTxtDataW_FName+"_2D_xAdj"),$(NEXTxtDataW_FName+"_Image")
End

Function SLP_AEYNEX_Make2D(AEYNEXDATA_FName,LPWidth)
	//DESCRIPTIONS:  Create 2D AEYNEX from ImageLineProfile on the VOL wave.
	//CREATED: xx.12.2019
	
	String AEYNEXDATA_FName
	Variable LPWidth
	Wave AEYNEXDATA=$(AEYNEXDATA_FName+"_Vol")
	Wave AEYNEX_xW=root:Package_SLP:AEYNEX:AEYNEX_xW
	Wave AEYNEX_yW=root:Package_SLP:AEYNEX:AEYNEX_yW
	
	variable i=0
	ImageLineProfile /P=0 xWave=AEYNEX_xW, yWave=AEYNEX_yW, srcwave=AEYNEXDATA, width=LPWidth
	Wave W_ImageLineProfile
	
	Make /O/N=(dimsize(AEYNEXDATA,2),dimsize(W_ImageLineProfile,0)) $(AEYNEXDATA_FName+"_2D") /WAVE=AEYNEX_2DW
	
	For (i=0;i<dimsize(AEYNEXDATA,2);i+=1)
		ImageLineProfile /P=(i) xWave=AEYNEX_xW, yWave=AEYNEX_yW, srcwave=AEYNEXDATA, width=LPWidth
		AEYNEX_2DW[i][]=W_ImageLineProfile[q]
	EndFor
End

Function SLP_AEYNEX_Convert3(ScanName)
	//DESCRIPTIONS: Change normal NEX into AEYNEX in SLPA NEX panel.
	//		- Create 2D AEYNEX and then combine within a selected K.E. range to crate create 1D AEYNEX spectrum.
	//		- Make 2D AEYNEX_xAdj which has constant step. This is the only suitable way to display 2D data in Igor.
	//		- Replace NEX Image with 2D AEYNEX_xAdj in NEX panel, so that user knows it's been converted already.
	//		- Multiple ROIs becaem ROI1 only.
	//		- Put/update the parameters used for extraction in ScanListW col. 15-23. 
	//		- *The function doesn't load image series and create volume. Must create VOL wave first. 
	//			This is because we want to use this function for adjustment in the panel.
	//		- **Use ScanName input for future implementation of batch processing
	//		- ***Use NVARs and SVARs in root:Package_SLP:AEYNEX:Settings: and global waves root:Package_SLP:AEYNEX:AEYNEX_xW,yW for dispersive line.
	
	//CREATED: 05.01.2020
	
	String ScanName //Name of the scan to convert normal NEXAFS to AEY-NEXAFS
	
	//String hvW_FName,IzeroW_FName //**No need anymore. Name of the hv and Izero waves
	Variable GlitchRemove_Flg //Flag for removing glitch (in the coarse scan ranges)
	
	Variable DataRow=SLP_NEX_FindDataRow(ScanName)
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW 
	Wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW 
	String NEXTxtDataW_FName=SLP_NEX_ScanListW[DataRow][2]+":"+SLP_NEX_ScanListW[DataRow][3]
	Wave NEXTxtDataW=$(NEXTxtDataW_FName)
	
	//Create 2D wave
	//Define disp. line
	Wave AEYNEX_xW=root:Package_SLP:AEYNEX:AEYNEX_xW
	Wave AEYNEX_yW=root:Package_SLP:AEYNEX:AEYNEX_yW

	NVAR LPWidth=root:Package_SLP:AEYNEX:Settings:LPWidth //Line profile width
	NVAR StepSize=root:Package_SLP:AEYNEX:Settings:StepSize //Step size for equalization of step
	NVAR AEYNEX_Offset=root:Package_SLP:AEYNEX:Settings:AEYNEX_Offset //where and how wide (STV) in AEYNEX2D to integrate for 1D AEYNEX
	NVAR AEYNEX_Width=root:Package_SLP:AEYNEX:Settings:AEYNEX_Width //where and how wide (STV) in AEYNEX2D to integrate for 1D AEYNEX
	NVAR medianSmoothPts=root:Package_SLP:AEYNEX:Settings:medianSmoothPts
	
	//Make 2D AEYNEXAFS from line profiles (still variable hv steps)
	SLP_AEYNEX_Make2D(NEXTxtDataW_FName,LPWidth)
	String AEYNEX_2DW_FName=NEXTxtDataW_FName+"_2D"
	Wave AEYNEX_2DW=$AEYNEX_2DW_FName
	
	//Normalize with Izero
	String IzeroW_FName=NEXTxtDataW_FName+"_I0"
	Wave IzeroW=$IzeroW_FName
	Duplicate /O AEYNEX_2DW,$(AEYNEX_2DW_FName+"nrm") /Wave=AEYNEX_2DnrmW
	AEYNEX_2DnrmW=AEYNEX_2DW[p][q]/IzeroW[p]
	
	//Interpolate to make 2D AEYNEXAFS with constant energy step
	String hvW_FName=NEXTxtDataW_FName+"_hv"
	SLP_Util_EqualizeStep2D(StepSize,AEYNEX_2DW_FName,hvW_FName,0,0) //Create _xAdj for 2D AEYNEX
	
	//Use 2D NEX (xAdj) map instead of image
	Duplicate /O $(NEXTxtDataW_FName+"_2D_xAdj"),$(NEXTxtDataW_FName+"_Image")
	
	//Create AEYNEX spectrum  (x not adjusted)
	Make /O/N=(dimsize(AEYNEX_2DW,0)) $(NEXTxtDataW_FName+"_AEYNEX") /Wave=AEYNEXResultW
	AEYNEXResultW=0
	Variable i=0
	variable k=0
		//Integrated only the selected KE region (e.g. to avoid photoemission lines)
	For (i=(floor(dimsize(AEYNEX_2DW,1)/2)-AEYNEX_Offset-floor(AEYNEX_Width/2));i<(floor(dimsize(AEYNEX_2DW,1)/2)-AEYNEX_Offset+floor(AEYNEX_Width/2));i+=1)
		AEYNEXResultW=AEYNEXResultW[p]+AEYNEX_2DW[p][i]
		k+=1
	EndFor
	AEYNEXResultW/=k
	
	//Set scale for 2D AEYNEX (for integrated 1D wave - just use hvW for x)
	Wave hvW=$hvW_FName
	Variable xStart=hvW[0]
	//Setscale /p x,xStart,StepSize,AEYNEXResultW
	setscale /p x,xStart,StepSize,$(NEXTxtDataW_FName+"_2D_xAdj")

	//Overwrite ROI1
	//ROI1 -> AEYNEX
	Duplicate /O $(NEXTxtDataW_FName+"_AEYNEX"),$(NEXTxtDataW_FName+"_ROI1") /Wave=ROI1W
	Duplicate /O $(NEXTxtDataW_FName+"_AEYNEX"),$(NEXTxtDataW_FName+"_ROI1_nrm") /Wave=ROI1_nrmW
	Duplicate /O $(NEXTxtDataW_FName+"_AEYNEX"),$(NEXTxtDataW_FName+"_ROI1_prc") /Wave=ROI1_prcW
	
	ROI1_nrmW/=IzeroW
	SLP_NEX_ProcessScan(DataRow)
	
	Smooth/M=0 MedianSmoothPts, ROI1W
	Smooth/M=0 MedianSmoothPts, ROI1_nrmW
	Smooth/M=0 MedianSmoothPts, ROI1_prcW
	
	//Update ScanListW
	//nROI -> =1
	SLP_NEX_ScanListW[DataRow][4]="1"
	SLP_NEX_ScanDisplayListW[DataRow][1]="1"
	SLP_NEX_ScanDisplayListW[DataRow][2]="1"
	
	//ScanListW UPDATE
	//Update the coordinate in the ScanListW
	SLP_NEX_ScanListW[DataRow][15]=num2str(AEYNEX_xW[0])
	SLP_NEX_ScanListW[DataRow][16]=num2str(AEYNEX_yW[0])
	SLP_NEX_ScanListW[DataRow][17]=num2str(AEYNEX_xW[1])
	SLP_NEX_ScanListW[DataRow][18]=num2str(AEYNEX_yW[1])
	
	SLP_NEX_ScanListW[DataRow][19]=num2str(StepSize)
	//Update the Offset/Width in the ScanListW
	SLP_NEX_ScanListW[DataRow][20]=num2str(AEYNEX_Offset)
	SLP_NEX_ScanListW[DataRow][21]=num2str(AEYNEX_Width)
	
	SLP_NEX_ScanListW[DataRow][22]=num2str(LPWidth)
	SLP_NEX_ScanListW[DataRow][23]=num2str(MedianSmoothPts)
	
	//Clear ROI list
	Wave ROIListW=$(NEXTxtDataW_FName+"_ROIList")
	ROIListW=0
End

Function SLP_UTIL_CreateColorTable(Random_Flg)
	//Description: Create a color table for ROI, Plot, or area color index
	//Created: 16.12.2019
	//Dependencies: NONE
	
	Variable Random_Flg
	
	NewDataFolder /O root:Package_SLP:Util:ColorTable
	Make /O/N=(32,3) root:Package_SLP:Util:ColorTable:ColorTableW /Wave=ColorTableW
	ColorTableW=0
	
	variable i,j
	
	If (Random_Flg)
		For (i=0;i<dimsize(ColorTableW,0);i+=1)
			For (j=0;j<3;j+=1)
				ColorTableW[i][j]= floor(enoise(65535/2)+65535/2)
			EndFor
		EndFor
	Else
		ColorTableW[0][0]={65535,0,0,52428,0,65535,0}
		ColorTableW[0][1]={0,52428,0,52428,52428,0,0}
		ColorTableW[0][2]={0,0,65535,1,52428,65535,0}
	EndIf
End

Function SLP_IXPS_FitExportVideoUX()
	//Description: [UX] Prompts for fit result export
	//Created: 16.12.2019
	//Dependencies: SLP_IXPS_FitExportVideo
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_value
	String VolName=SLP_IXPS_ScanListW[V_Value][0]
	
	//Set default
	Variable Skip=10
	Variable DisplayFrame=-1
	Variable JPG_flg=1
	String ImgFormatTxt=".jpg"
	
	//Prompt
	Prompt Skip,"How many pixels to skip:"
	Prompt DisplayFrame,"Frame to be displayed in the image sequence (-1 = middle frame)"
	prompt ImgFormatTxt, "Select image format to save to:", popup ".jpg;.tiff"	// prompt with dropdown menu
	doprompt "Export fit results to an image sequence", Skip,DisplayFrame,ImgFormatTxt
	
	If (Stringmatch(".jpg",ImgFormatTxt))
		JPG_flg=1
	Else
		JPG_flg=0
	Endif
	
	If((V_Flag==0)) //If user clicks continue
		SLP_IXPS_FitExportVideo(VolName,Skip,DisplayFrame,JPG_flg)
	Endif
	
End

Function SLP_IXPS_FitExportVideo(VolName,Skip,DisplayFrame,JPG_flg)
	//Description: Export IXPS fit results into an image sequence (to be opened by ImageJ and then exported into .avi video). Can only be made after GLA fitting
	//Created: 16.12.2019
	//Dependencies: SLP_Util_ExtractZProfile, SLP_IXPS_CreateFitGLAPeak
	
	String VolName
	Variable Skip //Export only part of the pixel. 10 is recommended (export only 1 out of 100*100 pixels). Otherwise there will be more than 100K images!
	Variable DisplayFrame //The frame number of the image to show in the image sequence. Pick the one with the best contrast. If set to '-1', the half-way frame will be used.
	Variable JPG_flg //save image sequence as .jpg (smaller file, lower quality). If JPG_flg=0, TIFF format is used (large file).
	
	//Check if color table exists
	If (!DatafolderExists("root:Package_SLP:Util:ColorTable"))
		SLP_UTIL_CreateColorTable(0)
	EndIf
	
	String PlotName=""
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	Wave MapVolW=$MapVolW_FName
	Wave ImgVolW=$ImgVolW_FName
	
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	String ZProfW_Name=VolName+"_zProfl"
	String FitZProfW_Name=VolName+"_zProflFit"
	String FitBGW_Name=VolName+"_fBg"
	
	Variable N_peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	Variable ExpBin=str2num(SLP_IXPS_ScanListW[DataRow][16])
	
	Display /N=FitResultExport $ZProfW_FName,$FitZProfW_FName,$FitBGW_FName
	PlotName=S_Name
	
	ModifyGraph /W=$PlotName mode($ZProfW_Name)=3,marker($ZProfW_Name)=5,msize($ZProfW_Name)=4,useMrkStrokeRGB($ZProfW_Name)=1,mrkStrokeRGB($ZProfW_Name)=(17476,17476,40000) 
	Modifygraph /W=$PlotName lsize($FitZProfW_Name)=2,rgb($FitZProfW_Name)=(65535,43690,0)
	Modifygraph /W=$PlotName lstyle($FitBGW_Name)=3,rgb($FitBGW_Name)=(65535,43690,0)
	Modifygraph /W=$PlotName nolabel(left)=2,mirror=1,minor=1,tick=2,fsize=20
	Label /W=$PlotName bottom "Start voltage (eV)"
	//Legend /A=LT
	
	String FitCompW_FName,FitCompW_Name,Index_Str
	Variable n
	For (n=1;n<=N_Peaks;n+=1)
		sprintf Index_str,"%02d",n
		FitCompW_FName=ImgVolW_FName+"_fp"+Index_Str
		FitCompW_Name=VolName+"_fp"+Index_Str
		Appendtograph /W=$PlotName  $FitCompW_FName
		Modifygraph /W=$PlotName lstyle($FitCompW_Name)=3,lsize($FitCompW_Name)=2
		Switch(n)
			case 1:
				ModifyGraph /W=$PlotName  rgb($FitCompW_Name)=(65535,0,0)
				break
			case 2:
				ModifyGraph /W=$PlotName  rgb($FitCompW_Name)=(0,65535,0)
				break
			case 3:
				ModifyGraph /W=$PlotName  rgb($FitCompW_Name)=(0,0,65535)
				break
		EndSwitch
	EndFor
	
	ModifyGraph /W=$PlotName margin(left)=340,height=283.465,width=283.465
	
	//If Display frame = -1, use the frame in the middle
	If (DisplayFrame==-1)
		DisplayFrame=(floor(dimsize(ImgVolW,2)/2))
	EndIF
	
	Display /HOST=$PlotName  /W=(0,0,310,310)/N=ImgWindow
	Appendimage /W=$(PlotName+"#ImgWindow") $ImgVolW_FName
	ModifyImage /W=$(PlotName+"#ImgWindow") $VolName plane=DisplayFrame
	Modifygraph /W=$(PlotName+"#ImgWindow") nolabel=2,margin=10
	
	Variable i=0
	Variable j=0
	Variable k=0
	
	Cursor /C=(65535,0,0 )/S=2/I/W=FitResultExport#ImgWindow A $VolName i,j
	
	NewPath /M="Choose a folder to export the fit results" ExportFitPath
	
	String ImageName=""
	For (j=0;j<dimsize(MapVolW,1);j+=1*Skip)
		For (i=0;i<dimsize(MapVolW,0);i+=1*Skip)
			If (numtype(MapVolW[i][j])!=2)
				SLP_Util_ExtractZProfile(ImgVolW_FName,i*ExpBin,j*ExpBin,ExpBin)
				SLP_IXPS_CreateFitGLAPeak(VolName,i,j,0)
				Cursor /C=(65535,0,0 )/S=2/I/W=$(PlotName+"#ImgWindow") A $VolName i*ExpBin,j*ExpBin
				DoUpdate
				
				sprintf ImageName,"ResultEXT_%04d",k
				If (JPG_flg)
					SavePICT/P=ExportFitPath/E=-6/B=72/SNAP=1 as ImageName
				Else //TIFF
					SavePICT/P=ExportFitPath/E=-7/B=72/SNAP=1 as ImageName
				Endif
				k+=1
			EndIf
		Endfor
	EndFor
	KillPath ExportFitPath
End

Function SLP_IXPS_AreaSpecMapsDisplayUX()
	//Description: [UX] Make (1) peak area maps, (2) species map, and (3) integrated species spectra and display
	//Created: 16:12:2019
	//Dependencies: SLP_IXPS_CreateAreaMap,SLP_IXPS_CreateSpeciesMap
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_value
	String VolName=SLP_IXPS_ScanListW[V_Value][0]
	
	SLP_IXPS_CreateAreaMap(VolName,1)
	SLP_IXPS_CreateSpeciesMap(VolName,1)
	
End

Function SLP_IXPS_CreateAreaMap(VolName,display_Flg)
	//Description: Make peak area maps from XPS fitting. No. of maps = no. of peaks in the fitting.
	//Created: 04.12.2019
	//Modified: 16.12.2019 - Put area waves in the SLPA:ImgXPS:ScanName folder
	//Dependencies: SLP_Func_InvGLA
	String VolName
	Variable display_Flg //Plot the area map in Igor
		
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	
	Wave MapVolW=$MapVolW_FName
	
	Variable N_peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	Variable Kn=0
	
	strswitch(BG_Type)	// string switch
		case "None":	// execute if case matches expression
			Kn=0
			break
		case "Flat":
			Kn=1
			break
		case "Slope":
			Kn=2
			break
		case "ERF":
			Kn=5
			break
		case "atan":
			Kn=5
			break
		case "Linear":
			Kn=0
			break
		case "Shirley":
			Kn=0
			break
	endswitch
	
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	Wave FitBGW=$FitBGW_FName
	FitBGW=0
	
	String FitCompW_FName=""
	variable peak_int,peak_pos,peak_fwhm,peak_mix,peak_as 
	String Index_Str=""
	
	Variable i,j,k
	
	For (i=1;i<=N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		Make /O /N=(dimsize(MapVolW,0),dimsize(MapVolW,1)) $(ImgVolW_FName+"_PeakArea"+Index_str) /Wave=PeakAreaM
		PeakAreaM=NaN
		For (j=0;j<dimsize(MapVolW,0);j+=1)
			For (k=0;k<dimsize(MapVolW,1);k+=1)
				If(numtype(MapVolW[j][k][0])!=2)
					Wave FitCompW=$(ImgVolW_FName+"_fp"+Index_Str)
					peak_int=MapVolW[j][k][Kn+0]
					peak_pos=MapVolW[j][k][Kn+1]
					peak_fwhm=MapVolW[j][k][Kn+2]
					peak_mix=MapVolW[j][k][Kn+3]
					peak_as=MapVolW[j][k][Kn+4] 
					
					FitCompW=SLP_Func_InvGLA(peak_int,peak_pos,peak_fwhm,peak_mix,peak_as,x)
					PeakAreaM[j][k]=area(FitCompW)
					
				EndIf
			EndFor
		EndFor
		If (Display_Flg)
			NewImage PeakAreaM
			ModifyGraph margin(right)=120
			Colorscale /A=RT /X=-25 /F=0
			SetAxis/A left
		EndIf
		Kn+=5
	EndFor
End

Function SLP_IXPS_CreateSpeciesMap(VolName,Disp_Flg)
	//Description: Create species map (of peak number with dominating area in each pixel) and integrated spectrum for pixels of the same species.
	//Created: 16.12.2019
	//Dependencies: root:Package_SLP:Util:ColorTable:ColorTableW (from SLP_UTIL_CreateColorTable)
	String VolName
	Variable Disp_Flg
	
	Wave PeakArea01W=root:IXPS11_PeakArea01
	Wave PeakArea02W=root:IXPS11_PeakArea02
	Wave PeakArea03W=root:IXPS11_PeakArea03
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	Wave MapVolW=$MapVolW_FName
	Wave ImgVolW=$ImgVolW_FName
	
	Variable N_peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	Variable ExpBin=str2num(SLP_IXPS_ScanListW[DataRow][16])
	
	//Create 2D spectrum wave (col = peak species, row = energy)
	Make /O/N=(dimsize(ImgVolW,2),N_peaks) $(ImgVolW_FName+"_SIndvPk") /Wave=Spectrum_IndvPk // IXPS11_Spectrum_IndvPk //2D wave containing integrated spectra
	Make /O/N=(N_peaks) $(ImgVolW_FName+"_IndvPkCts") /Wave=IndvPkCounts //IXPS_Spectrum_IndvPkCounts //Number of pixels for each species (to normalize the integrated spectra)
	Setscale /P x,dimoffset(ImgVolW,2),dimdelta(ImgVolW,2),Spectrum_IndvPk
	Spectrum_IndvPk=0
	IndvPkCounts=0
		
	Make /O /N=(dimsize(MapVolW,0),dimsize(MapVolW,1)) $(ImgVolW_FName+"_SpcMap") /Wave=SpeciesMapW
	SpeciesMapW=NaN
	Make /O /N=(dimsize(MapVolW,0),dimsize(MapVolW,1),N_Peaks) root:Package_SLP:ImgXPS:AreaVolW /Wave=AreaVolW
	
	Make/O/N=(N_Peaks) root:Package_SLP:ImgXPS:PeakAreaCompareW /Wave=PeakAreaCompareW
	Make/O/N=(N_Peaks) root:Package_SLP:ImgXPS:PeakAreaIndexW /Wave=PeakAreaIndexW
	PeakAreaIndexW[]=p+1
	
	Variable i,j,k
	String Index_str=""
	
	//Combine area maps into an area volume wave (temporary - will be deleted at the end of the function)
	For (i=1;i<=N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		Wave PeakAreaM=$(ImgVolW_FName+"_PeakArea"+Index_str)
		AreaVolW[][][i-1]=PeakAreaM[p][q]
	EndFor
	
	//Find the species with the largest area under peak - then map them.
	Wave zProflW=$(ImgVolW_FName+"_zProfl")
	For (i=0;i<dimsize(AreaVolW,0);i+=1)
		For (j=0;j<dimsize(AreaVolW,1);j+=1)
			If (numtype(AreaVolW[i][j][0])!=2) //Map only where the peak fitting was performed (outside the area = NaN)
				PeakAreaCompareW[]=AreaVolW[i][j][p]
				WaveStats /Q/Z PeakAreaCompareW //Use WaveStats to find V_maxRowLoc
				SpeciesMapW[i][j]=PeakAreaIndexW[V_maxRowLoc]
				
				SLP_Util_ExtractZProfile(ImgVolW_FName,i*ExpBin,j*ExpBin,ExpBin)
				For (k=0;k<dimsize(ImgVolW,2);k+=1)
					Spectrum_IndvPk[k][V_maxRowLoc]+=zProflW[k]
				EndFor
//				For (k=0;k<dimsize(ImgVolW,2);k+=1)	
//	a				Spectrum_IndvPk[k][V_maxRowLoc]+=ImgVolW[i*ExpBin][j*ExpBin][k] //integrating spectra from the same species
//				EndFor
				IndvPkCounts[V_maxRowLoc]+=1 //Species counts
			EndIf
		Endfor
	EndFor
	
	String DisplayName=""
	String ImageName=""
	Wave ColorTableW=root:Package_SLP:Util:ColorTable:ColorTableW
	If (Disp_Flg)
		Display /N=IntgSpectra
		DisplayName=S_Name
		Display /N=SpeciesMap
		ImageName=S_Name
		Appendimage /W=$ImageName SpeciesMapW
		ModifyImage /W=$ImageName $(VolName+"_SpcMap") cindex=ColorTableW
	Endif
	
	For (i=0;i<dimsize(Spectrum_IndvPk,1);i+=1)
		//Normalize Species Spectra with pixel counts
		Spectrum_IndvPk[][i]/=IndvPkCounts[i]
		sprintf Index_str,"%02d",i+1
		Duplicate /O/R=[][i] Spectrum_IndvPk,$(ImgVolW_FName+"_SpcPk"+Index_str) /Wave=IntgSpectrumW
		Redimension /N=(dimsize(Spectrum_IndvPk,0),0) IntgSpectrumW
		If (Disp_Flg)
			Appendtograph /W=$DisplayName IntgSpectrumW
			Modifygraph /W=$DisplayName rgb($(VolName+"_SpcPk"+Index_str))=(ColorTableW[i+1][0],ColorTableW[i+1][1],ColorTableW[i+1][2])
		EndIf
	EndFor
	
	If (Disp_Flg)
		Modifygraph /W=$DisplayName mirror=1,minor=1,tick=2
		Legend /W=$DisplayName /A=LT
	Endif
	
	Killwaves AreaVolW
End


Function /T SLP_Util_CheckNameDialog(ExpWName)
	//Description:
	//Return empty string ("") to flag that the process is to be terminated (user clicked 'Cancel')
	//Return original name (the original wave is to be overwritten).
	//Return a new unique name (create a new wave)
	//Created: 01.12.2019
	//Dependencies: NONE
	
	String ExpWName
	String ExpWName_New=""
	
	If (CheckName(ExpWName,1))//Check whether duplicate
		DoAlert /T="Duplicate wave name." 2,"Duplicate wave name ("+ExpWName+"). Overwrite the wave?"
//		V_flag =	1:	Yes clicked.
//					2:	No clicked.
//					3:	Cancel clicked.
		If (V_flag==1) //(YES - overwrite)
			ExpWName_New=ExpWName
		ElseIf (V_flag==2) //(NO - change name)
			Do
				ExpWName_New=cleanupname(uniqueName(ExpWName,1,0),0)
				Prompt ExpWName_New,"A new name is suggested below, or you may enter another name:"
				DoPrompt "",ExpWName_New
				If (V_Flag==1) //Cancel
					ExpWName_New=""
				ElseIf (CheckName(ExpWName_New,1)) //duplicate?
					DoAlert 0,"Still a duplicate name"
				Elseif (cmpstr(ExpWName_New,CleanupName(ExpWName_New,0))) //is not non-liberal?
					DoAlert 0,"The chosen name is not valid."
				EndIf
				
			While ((CheckName(ExpWName_New,1)||!Stringmatch(ExpWName_New,CleanupName(ExpWName_New,0)))&&!stringmatch(ExpWName_New,"")) 
			//If user still entered duplicate name or non-liberal name, and user didn't click Cancel
		Elseif (V_flag==3)
			ExpWName_New=""
		EndIf
	Endif
	
	Return ExpWName_New
End


Function SLP_Util_LabelImage(GraphName)
	//Description: Label image with the wave (image) name. Put "" for current graph
	//Created: 04.12.2019
	//Dependencies: NONE
	
	String GraphName
	String ImageName=stringfromlist(0,ImageNameList(GraphName,";"))
	Textbox /A=RB ImageName
End



//LAUNCHER

Function Panel_Util_Launcher()
	NVAR Launcher_expand=root:Package_SLP:Util:Launcher_expand
	If (!Launcher_expand)
		SLP_Util_CreateLauncher_small()
	Else
		SLP_Util_CreateLauncher()
	EndIf
End

///////////////
//UTILITY BELT
///////////////

Function SLP_Util_PanelColorScale()
	DoWindow /K SLP_ColorScalePanel
	NewPanel /W=(130,90,610,215) /N=SLP_ColorScalePanel
	
	NVAR SetValue_Min=root:Package_SLP:Util:CScale:SetValue_Min
	NVAR SetValue_Max=root:Package_SLP:Util:CScale:SetValue_Max
	NVAR MinValue=root:Package_SLP:Util:CScale:MinValue
	NVAR MaxValue=root:Package_SLP:Util:CScale:MaxValue
	NVAR Rev_Flg=root:Package_SLP:Util:CScale:Rev_Flg
	SVAR ColorTable=root:Package_SLP:Util:CScale:ColorTable
	
	String ImageName=Stringfromlist(0,ImageNameList("",";"))
	Wave ImgW=ImageNameToWaveRef("",ImageName)
	ImageStats /Q ImgW
	MinValue=V_Min
	MaxValue=V_Max
	String ImgInfo=ImageInfo("",ImageName,0)
	String ImgCtab=StringByKey("RECREATION",ImgInfo)
	String ImgColor=ImgCtab[7,strlen(ImgCtab)-2]
	SetValue_Min=str2num(StringFromList(0,ImgColor,","))
	SetValue_Max=str2num(StringFromList(1,ImgColor,","))

	Variable Button_X=300
	Variable Button_XSize=75
	Variable Button_Y=35
	Button Button_AutoScale,pos={Button_X,Button_Y},size={Button_XSize,20}, Fsize=10,title="Auto Scale",proc=ButtonProc_Util_ColorScalePanel
	Button Button_AutoRange,pos={Button_X,Button_Y+20},size={Button_XSize,20}, Fsize=10,title="Auto Range",proc=ButtonProc_Util_ColorScalePanel
	Button Button_Range,pos={Button_X,Button_Y+40},size={Button_XSize,20}, Fsize=10,title="Range..",proc=ButtonProc_Util_ColorScalePanel
	Button Button_Done,pos={Button_X,Button_Y+60},size={Button_XSize,20}, Fsize=10,title="Done",proc=ButtonProc_Util_ColorScalePanel
	
	DrawText 5,20,"\Z12Adjust colour scale"
	DrawText 5,40,"Min:"
	DrawText 5,90,"Max:"
	
	Slider Slider_MinValue,pos={35,25},size={240,30}, title="Min value",vert=0,limits={MinValue,MaxValue,0.01},proc=SliderProc_Util_ColorScale,ticks=20,variable=SetValue_Min
	Slider Slider_MaxValue,pos={35,75},size={240,30}, title="Max value",vert=0,limits={MinValue,MaxValue,0.01},proc=SliderProc_Util_ColorScale,ticks=20,variable=SetValue_Max
	
	PopupMenu popup_CtabList,pos={119,4},size={200,20},proc=PopMenuProc_Util_ColorScale
	PopupMenu popup_CtabList,mode=4,value= #"\"*COLORTABLEPOP*\""
	CheckBox check_Reverse,pos={325,7},size={52,15},proc=CheckProc_Util_RevFlg,title="Reverse"
	CheckBox check_Reverse,value= 0
	
	Button Button_DefaultScale,pos={Button_X+85,Button_Y+20},size={75,20},proc=ButtonProc_Util_ColorScalePanel,title="Set to default"
	Button Button_DefaultScale,fSize=10
	Button Button_SetAsDefault,pos={Button_X+85,Button_Y+40},size={75,20},proc=ButtonProc_Util_ColorScalePanel,title="Set as default"
	Button Button_SetAsDefault,fSize=10
	Button Button_SetDefault,pos={Button_X+85,Button_Y+60},size={75,20},proc=ButtonProc_Util_ColorScalePanel,title="Set default.."
	Button Button_SetDefault,fSize=10
	DrawText 381,50,"Default"
	SetDrawEnv fillpat= 0
	DrawRect 380,51,463,117
	//ModifyImage /W=Cutoff $ImageName ctab= {SetValue_Min,SetValue_Max,Rainbow,0}
End

Function PopMenuProc_Util_ColorScale(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			String ImageName=Stringfromlist(0,ImageNameList("",";"))
			ControlInfo /W=SLP_ColorScalePanel check_Reverse
			Variable Rev_Flg=V_Value
			ModifyImage $ImageName ctab= {,,$popStr,Rev_Flg}
			SVAR ColorTable=root:Package_SLP:Util:CScale:ColorTable
			ColorTable=popStr
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_Util_RevFlg(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			NVAR Rev_Flg=root:Package_SLP:Util:CScale:Rev_Flg
			Rev_Flg=checked
			String ImageName=Stringfromlist(0,ImageNameList("",";"))
			ModifyImage $ImageName ctab= {,,,Rev_Flg}
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_Util_ColorScalePanel(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	String ImageName
	String ImgW_FName
	
	Variable ImgMedian,ImgQ25,ImgQ75
	NVAR MinValue=root:Package_SLP:Util:CScale:MinValue
	NVAR MaxValue=root:Package_SLP:Util:CScale:MaxValue
	
	NVAR SetValue_Min=root:Package_SLP:Util:CScale:SetValue_Min
	NVAR SetValue_Max=root:Package_SLP:Util:CScale:SetValue_Max
	
	NVAR SetValueMin_Default=root:Package_SLP:Util:CScale:SetValueMin_Default
	NVAR SetValueMax_Default=root:Package_SLP:Util:CScale:SetValueMax_Default
	NVAR Rev_Flg_Default=root:Package_SLP:Util:CScale:Rev_Flg_Default
	
	SVAR ColorTable=root:Package_SLP:Util:CScale:ColorTable
	NVAR Rev_Flg=root:Package_SLP:Util:CScale:Rev_Flg
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			StrSwitch (ba.CtrlName)
				case "button_Done":
					DoWindow/K SLP_ColorScalePanel
					break
				case "Button_Range":
					ImageName=Stringfromlist(0,ImageNameList("",";"))
					Wave ImgW=ImageNameToWaveRef("",ImageName)
					ImgW_FName=GetWavesDataFolder(ImgW,1)+NameofWave(ImgW)
				
					ControlInfo Slider_MinValue
					
					Variable MinValue_prompt=MinValue
					Variable MaxValue_prompt=MaxValue
					
					Prompt MinValue_prompt,"Minimum intensity"
					Prompt MaxValue_prompt,"Maximum intensity"
					DoPrompt "Enter parameters",MinValue_prompt,MaxValue_prompt
					
					If (V_Flag==0)
						MinValue=MinValue_Prompt
						MaxValue=MaxValue_Prompt
						
						Slider Slider_MinValue,limits={MinValue,MaxValue,(MaxValue-MinValue)/200}
						Slider Slider_MaxValue,limits={MinValue,MaxValue,(MaxValue-MinValue)/200}
					EndIF
					break
				case "Button_AutoRange":
					ImageName=Stringfromlist(0,ImageNameList("",";"))
					Wave ImgW=ImageNameToWaveRef("",ImageName)
					ImgW_FName=GetWavesDataFolder(ImgW,1)+NameofWave(ImgW)
					
					ImgMedian=SLP_Util_FindImgMedian(ImgW_FName,0)
					ImgQ25=SLP_Util_FindImgMedian(ImgW_FName,1)
					ImgQ75=SLP_Util_FindImgMedian(ImgW_FName,2)
					MaxValue=ImgMedian+(ImgQ75-ImgMedian)*2
					MinValue=ImgMedian-(ImgMedian-ImgQ25)*2
					Slider Slider_MinValue,limits={MinValue,MaxValue,(MaxValue-MinValue)/200}
					Slider Slider_MaxValue,limits={MinValue,MaxValue,(MaxValue-MinValue)/200}
					break
				case "Button_AutoScale":
					ImageName=Stringfromlist(0,ImageNameList("",";"))
					Wave ImgW=ImageNameToWaveRef("",ImageName)
					ImgW_FName=GetWavesDataFolder(ImgW,1)+NameofWave(ImgW)
					
					ImgQ25=SLP_Util_FindImgMedian(ImgW_FName,1)
					ImgQ75=SLP_Util_FindImgMedian(ImgW_FName,2)
					ModifyImage $ImageName ctab= {ImgQ25,ImgQ75,$ColorTable,Rev_Flg}
					SetValue_Min=ImgQ25
					SetValue_Max=ImgQ75
					break
				case "Button_DefaultScale": //Use default setting
					ImageName=Stringfromlist(0,ImageNameList("",";"))
					SetValue_Min=SetValueMin_Default
					SetValue_Max=SetValueMax_Default
					Rev_flg=Rev_Flg_Default
					ModifyImage $ImageName ctab= {SetValue_Min,SetValue_Max,$ColorTable,Rev_flg}
					CheckBox check_Reverse win=SLP_ColorScalePanel,value=Rev_flg
					break
				case "Button_SetAsDefault": //Set current values as default
					ImageName=Stringfromlist(0,ImageNameList("",";"))
					SetValueMin_Default=SetValue_Min
					SetValueMax_Default=SetValue_Max
					Rev_Flg_Default=Rev_Flg
					break
				case "Button_SetDefault": //Enter default values (prompt)
					Variable Min_DefaultPrompt=SetValueMin_Default
					Variable Max_DefaultPrompt=SetValueMax_Default
					String Rev_Flg_txt
					If (Rev_Flg_Default==0)
						Rev_Flg_txt="no"
					Else
						Rev_Flg_txt="yes"
					EndIf
					Prompt Min_DefaultPrompt "Default minimum"
					Prompt Max_DefaultPrompt "Default maximum"
					Prompt Rev_Flg_Txt,"Reverse color",popup,"yes;no"
					DoPrompt "Enter parameters", Min_DefaultPrompt,Max_DefaultPrompt,Rev_Flg_Txt
					
					If (V_Flag==0) //User clicks 'Continue'
						SetValueMin_Default=Min_DefaultPrompt
						SetValueMax_Default=Max_DefaultPrompt
						Rev_Flg_Default=stringmatch(Rev_Flg_Txt,"yes") //Flag for reverse color
					EndIF
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SliderProc_Util_ColorScale(sa) : SliderControl
	STRUCT WMSliderAction &sa
	
	NVAR SetValue_Min=root:Package_SLP:Util:CScale:SetValue_Min
	NVAR SetValue_Max=root:Package_SLP:Util:CScale:SetValue_Max
	
	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				If (stringmatch(sa.CtrlName,"Slider_MinValue"))
					SetValue_Min=curval
				ElseIf (stringmatch(sa.CtrlName,"Slider_MaxValue"))
					SetValue_Max=curval
				EndIf
				
				String ImageName=Stringfromlist(0,ImageNameList("",";"))
				ControlInfo /W=SLP_ColorScalePanel check_Reverse
				Variable Rev_Flg=V_Value
				ModifyImage $ImageName ctab= {SetValue_Min,SetValue_Max,,Rev_Flg}
			endif
			break
	endswitch

	return 0
End


Function SLP_Util_FindImgMedian(ImgW_FName,OptFlg)
	//Find median without NaN
	String ImgW_FName
	Variable OptFlg //0=median,1=Q25,2=Q75
	
	Wave ImgW=$ImgW_FName
	variable i=1
	variable centerP=floor(dimsize(ImgW,0)/2)
	variable centerQ=floor(dimsize(ImgW,0)/2)
	variable ImgMedianInt_tmp=0
	variable ImgMedianInt=0

	//Start from small area in the middle. Expand until NaN is found
	Do
		ImgMedianInt=ImgMedianInt_tmp
		Duplicate /O/R=[centerP-i,centerP+i][centerQ-i,centerQ+i] ImgW,SmImgW
		ImgMedianInt_tmp=statsmedian(SmImgW)
		i+=1
	While (i<dimsize(ImgW,0)/2&&numtype(ImgMedianInt_tmp)==0)
	StatsQuantiles /Q SmImgW
	Killwaves SmImgW
	Variable Result=0
	
	switch(OptFlg)	// numeric switch
		case 0:		// execute if case matches expression
			Result=ImgMedianInt
			break						// exit from switch
		case 1:		// execute if case matches expression
			Result=V_Q25
			break
		case 2:		// execute if case matches expression
			Result=V_Q75
			break	
		endswitch
	Return Result
End

Function ButtonProc_Util_FindCutOff(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			string TraceList=TracenameList("",";",1)
			String TraceName=""
			prompt TraceName,"Trace to find ERF cutoff",popup,TraceList
			DoPrompt "Select trace",TraceName
			
			If (V_Flag==0) //User clicks 'Continue'	
				Wave DataW=TraceNameToWaveRef("",Tracename)
				//display DataW
				String DataW_Name= NameofWave(DataW)
				String DataW_FName= GetWavesDataFolder(DataW,1)+DataW_Name
				
				SLP_Util_FindCutoff(DataW_FName,1)
			EndIF
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


//////////////
//Multi GLAs Fit
//////////////

//USE OFTEN
Function SLP_MGFit_UseOften()
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Wave SLP_MGFit_DataListSelW=root:Package_SLP:MGFit:SLP_MGFit_DataListSelW
	
	Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	Wave  SLP_MGFit_ConstraintDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW
	Wave /T SLP_MGFit_DefaultConstraintW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintW
	Wave SLP_MGFit_DefaultConstraintSelW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintSelW
	Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
	Wave SLP_MGFit_PeakLibrarySelW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW
	
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	String ConstraintW_FName=DataLocation+"ConstraintW"
	String HilightW_FName=DataLocation+"HilightW"
	String CoefGuessM_FName=DataLocation+"CoefGuessM" //Use for fitting
	String ConstraintV_FName=DataLocation+"ConstraintV" //Use for fitting

	String DataW_FName=DataLocation+DataName	//Raw data
	String BgW_FName=DataW_FName+"_BG"		//Background
	String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
	String Data_GssW_FName=DataW_FName+"_Gss"	//Guess curve
	
	variable i=0
	String Data_Comp_FName=DataW_FName+"_p"+num2str(i)	//Individual GLA component
End


Function PopMenuProc_ARPES(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa
	ControlInfo /W=SLP_ARPES_Panel_01 list_ScanList
	Variable SelRow=V_Value
	Wave /T SLP_ARPES_ScanListW=root:Package_SLP:ARPES:SLP_ARPES_ScanListW
	switch( pa.eventCode )
		case 2: // mouse up
			strswitch(pa.CtrlName)	// string switch
				case "popup_ColorTable01":
					Variable popNum = pa.popNum
					String popStr = pa.popStr
					
					SLP_ARPES_ScanListW[SelRow][8]=popStr
					SLP_ARPES_DisplaySelectedData(SelRow)
					break
				case "popup_CursorColor":
					ControlInfo /W=SLP_ARPES_Panel_01 popup_CursorColor
					SLP_ARPES_ScanListW[SelRow][27]=num2str(V_Red)
					SLP_ARPES_ScanListW[SelRow][28]=num2str(V_Green)
					SLP_ARPES_ScanListW[SelRow][29]=num2str(V_Blue)
					SLP_ARPES_DisplaySelectedData(SelRow)
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End










Function SLP_MGFit_CreatePanel() : Panel

	//Init
	if (!DataFolderExists("root:Package_SLP:MGFit"))
		SLP_MGFit_init()
	Endif

	Dowindow /K SLP_MultiGLAFit_01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(45,45,1150,670) /N=SLP_MultiGLAFit_01
	
	SetDrawLayer UserBack
	SetDrawEnv fsize= 14
	DrawText 10,25,"SLP Multi GLA Peaks Fitting Panel"
	DrawText 380,30,"Parameter Guess and Results"
	DrawText 915,25,"Constraints and Hold"
	DrawText 380,280,"Peak library"
	
	DrawText 427,508,"Peak area"
	DrawText 379,570,"Area under curve"
	DrawText 915,240,"Data list"
	SetDrawEnv fsize= 10
	DrawText 452,522,"Guess"
	SetDrawEnv fsize= 10
	DrawText 468,538,"Fit"
	
	SetDrawEnv fsize= 10
	DrawText 916,190,"Extra constraints:"
	//SetVariable Setvar_N_Peaks,pos={378,13},size={170,15},title="Number of GLA peak(s)",noEdit=1
	
	NVAR GDataRow=root:Package_SLP:MGFit:GDataRow
	
	Variable a=30,b=60,c=90
	ListBox ListBox_PeakParam,pos={380,33},size={530,215},ListWave=root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplayW ,SelWave=root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplaySelW
	ListBox ListBox_PeakParam,widths={32,45,85,a,a,a,a,a,a,a,a,a,a,0,0,0},userColumnResize=1
	ListBox ListBox_PeakParam,mode=2,proc=ListBoxProc_MGFit_CoefGuess,SelRow=0,colorWave=root:Package_SLP:MGFit:ListColors
	
	ListBox ListBox_PeakConstraints,pos={915,31},size={180,110},ListWave=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW, SelWave=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW
	ListBox ListBox_PeakConstraints,widths={50,a,a,32,a},userColumnResize=1
	ListBox ListBox_PeakConstraints proc=ListBoxProc_MGFit_Constraints
	
	ListBox ListBox_DataList,pos={915,261},size={180,224},ListWave=root:Package_SLP:MGFit:SLP_MGFit_DataListDisplayW, Selwave=root:Package_SLP:MGFit:SLP_MGFit_DataListDisplaySelW
	ListBox ListBox_DataList,widths={32,50,100},SelRow=GDataRow,userColumnResize=1
	ListBox ListBox_DataList,mode=2,proc=ListBoxProc_MGFit_DataSelect
	
	ListBox ListBox_Library,pos={380,285},size={530,130},ListWave=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW,SelWave=root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW
	ListBox ListBox_Library,widths={32,50,100,a,a,a,a,a,a,a,a,a,a,a,a,a},userColumnResize=1
	
	ListBox list_PeakArea,pos={485,494},size={601,64},mode=6,proc=ListBoxProc_MGFit_AreaRatio
	ListBox list_PeakArea,listWave=root:Package_SLP:MGFit:SLP_MGFit_PeakAreaW
	ListBox list_PeakArea,widths={b,b,b,b,b,b,b,b,b,b,b,b,b,b,b,b,b,b,b,b,b}
	ListBox list_PeakArea,userColumnResize= 1
	
	ListBox list_CurveArea,pos={483,562},size={601,54},mode=6,proc=ListBoxProc_MGFit_AreaRatio
	ListBox list_CurveArea,listWave=root:Package_SLP:MGFit:SLP_MGFit_CurveAreaW
	ListBox list_CurveArea,widths={c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c,c}
	ListBox list_CurveArea,userColumnResize= 1
	
	Variable SliderGroup_Xpos=10
	Variable SliderGroup_Ypos=375
	Variable SliderGroup_vspacing=67
	Variable SliderGroup_hWidth=255
	
	SetDrawLayer UserBack
	SetDrawEnv fsize= 10; DrawText SliderGroup_Xpos,SliderGroup_Ypos-10,"Intensity"
	SetDrawEnv fsize= 10; DrawText SliderGroup_Xpos+62,SliderGroup_Ypos-10,"Position"
	SetDrawEnv fsize= 10; DrawText SliderGroup_Xpos+62,SliderGroup_Ypos-10+SliderGroup_vspacing,"FWHM"
	SetDrawEnv fsize= 10; DrawText SliderGroup_Xpos+62,SliderGroup_Ypos-10+2*SliderGroup_vspacing,"Mixture"
	SetDrawEnv fsize= 10; DrawText SliderGroup_Xpos+62,SliderGroup_Ypos-10+3*SliderGroup_vspacing,"Asymmetry"
	
	Slider slider_Int,pos={SliderGroup_Xpos,SliderGroup_Ypos},size={60,190}
	Slider slider_Int,limits={0,2,0.05},value= 0,ticks=10,proc=SliderProc_MGFit_CoefAdjust
	
	Slider slider_Pos,pos={SliderGroup_Xpos+60,SliderGroup_Ypos-10},size={SliderGroup_hWidth,45}
	Slider slider_Pos,limits={270,350,0.1},value= 0,ticks=10,vert= 0,proc=SliderProc_MGFit_CoefAdjust
	Slider slider_Fwhm,pos={SliderGroup_Xpos+60,SliderGroup_Ypos-10+SliderGroup_vspacing},size={SliderGroup_hWidth,45}
	Slider slider_Fwhm,limits={0.3,5,0.1},value= 0,ticks=10,vert= 0,proc=SliderProc_MGFit_CoefAdjust
	Slider slider_Mix,pos={SliderGroup_Xpos+60,SliderGroup_Ypos-10+2*SliderGroup_vspacing},size={SliderGroup_hWidth,45}
	Slider slider_Mix,limits={0.01,0.99,0.01},value= 0,ticks=10,vert= 0,proc=SliderProc_MGFit_CoefAdjust
	Slider slider_As,pos={SliderGroup_Xpos+60,SliderGroup_Ypos-10+3*SliderGroup_vspacing},size={SliderGroup_hWidth,45}
	Slider slider_As,limits={0.01,0.99,0.01},value= 0,ticks=10,vert= 0,proc=SliderProc_MGFit_CoefAdjust
	
	SetVariable setvar_GssChisq,pos={11,323},size={150,15},title="Guess chi square"
	SetVariable setvar_GssChisq,limits={-inf,inf,0},value= root:Package_SLP:MGFit:Gss_Chisq,noedit= 1
	SetVariable setvar_GssChisq valueColor=(1,26221,39321)
	SetVariable setvar_FitChisq,pos={181,323},size={150,15},title="Fit chi square"
	SetVariable setvar_FitChisq,valueColor=(13102,26214,0)
	SetVariable setvar_FitChisq,limits={-inf,inf,0},value= root:Package_SLP:MGFit:Fit_Chisq,noedit= 1
	
	SetVariable setvar_LowX,pos={390,575},size={90,15},title="Low X",proc=SetVarProc_MGFit_AreaUnderCurve
	SetVariable setvar_LowX,value= root:Package_SLP:MGFit:LowX
  	SetVariable SetVar_HighX,pos={390,600},size={90,15},title="High X",proc=SetVarProc_MGFit_AreaUnderCurve
	SetVariable SetVar_HighX,value= root:Package_SLP:MGFit:HighX
	
	SetVariable setvar_AreaRatio,pos={485,477},size={100,15},title="Area ratio"
	SetVariable setvar_AreaRatio,limits={-inf,inf,0},value= root:Package_SLP:MGFit:AreaRatio,noedit= 1
	
	SetVariable setvar_ExtraConstraints,pos={917,194},size={170,16},title=":"
	SetVariable setvar_ExtraConstraints,proc=SetVarProc_ExtraConstraints,help={"Extra constraints examples: K1>K2;K3+K4=K5+K6"}
	SetVariable setvar_ExtraConstraints,limits={-inf,inf,0},value= root:Package_SLP:MGFit:ExtraConstraints
	
	PopupMenu popup_BgSel,pos={155,25},size={113,20},title="Background type",Proc=PopMenuProc_MGFit_MakeBG
	PopupMenu popup_BgSel,mode=1,popvalue="None",value= #"\"None;Shirley;Erf;atan;Flat;Slope\""
	
	Button button_Done,pos={857,466},size={50,20},title="Done",proc=ButtonProc_MGFit_Done,fsize=10
	
	Button Button_ImportFromLib,pos={383,418},size={525,20},title="Import selected peak",fSize=10,proc=ButtonProc_MGFit_ImportFromLib
	Button Button_AddLibItem,pos={383,442},size={100,20},proc=ButtonProc_MGFit_AddLibItem,title="Add to library..",fSize=10
	Button Button_EditLib,pos={489,442},size={70,20},proc=ButtonProc_MGFit_EditLib,title="Edit library..",fSize=10
	Button Button_RemoveLibItem,pos={564,442},size={120,20},proc=ButtonProc_MGFit_RemoveFromLib,title="Remove selected peak",fSize=10
	Button Button_SaveLib,pos={689,442},size={95,20},proc=ButtonProc_MGFit_SaveLibAsTxt,title="Save library as..", fSize=10
	Button Button_LoadLib,pos={789,442},size={120,20},proc=ButtonProc_MGFit_LoadLibFile,title="Load library from file..",fSize=10

	Button Button_Export,pos={120,46},size={100,20},title="Export graph..",fsize=10,proc=ButtonProc_MGFit_ExportGraph
	Button Button_ReScale,pos={225,46},size={53,20},proc=ButtonProc_MGFit,title="Rescale",fSize=10,fColor=(65535,65535,65535)

	
	Button Button_AddData,pos={915,240},size={85,20},title="Add data wave",fsize=10,proc=ButtonProc_MGFit_LoadData
  	Button Button_ConstraintDefault,pos={915,145},size={51,16},title="Default",fsize=10,proc=ButtonProc_MGFit_DefConstraints
  	Button Button_EditConstraintDefault,pos={965,145},size={80,16},title="Edit default..",fsize=10,proc=ButtonProc_MGFit_EditConstDef
  	Button Button_DeleteData,pos={1005,240},size={85,20},title="Delete data..",fSize=10,proc=ButtonProc_MGFit_DeleteData
	Button Button_CopyGssParam,pos={745,10},size={130,20},proc=ButtonProc_MGFit_CopyGssParam,title="Copy parameters from..",fSize=10
	Button Button_Holdall,pos={1046,146},size={51,16},proc=ButtonProc_MGFit_HoldAllTogg,title="Hold all",fSize=10
	Button Button_AddLibFromGss,pos={465,251},size={200,20},proc=ButtonProc_MGFit_AddLibItemGss,title="Add highlighted peak to library",fSize=10
  	Button button_Fit,pos={700,255},size={50,23},proc=ButtonProc_MGFit_Fit,title="FIT",fColor=(65535,21845,0)
	
	Button Button_SaveGss,pos={555,11},size={90,20},proc=ButtonProc_MGFit_SaveGssAsTxt,title="Save guesses..",fSize=10
	Button Button_LoadGss,pos={650,11},size={90,20},proc=ButtonProc_MGFit_LoadGssFile,title="Load guesses..",fSize=10
	
	Button Button_AcceptFitCoef,pos={758,254},size={150,20},proc=ButtonProc_MGFit_AcceptFit,title="Accept new fit coefficients",fSize=10
	Button Button_AdjBG,pos={10,46},size={100,20},proc=ButtonProc_MGFit_BGAdj,title="Adjust background",fSize=10

	Button button_FineIntDec,pos={10,575},size={15,20}
	Button button_FineIntDec,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title="V"
	Button button_FineIntInc,pos={30,575},size={15,20}
	Button button_FineIntInc,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title="^"

	Button button_FinePosInc,pos={SliderGroup_Xpos+SliderGroup_hWidth+85,SliderGroup_Ypos-20},size={15,20}
	Button button_FinePosInc,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title=">"
	Button button_FinePosDec,pos={SliderGroup_Xpos+SliderGroup_hWidth+65,SliderGroup_Ypos-20},size={15,20}
	Button button_FinePosDec,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title="<"
	Button button_FineFwhmInc,pos={SliderGroup_Xpos+SliderGroup_hWidth+85,SliderGroup_Ypos-20+SliderGroup_vspacing},size={15,20}
	Button button_FineFwhmInc,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title=">"
	Button button_FineFWHMDec,pos={SliderGroup_Xpos+SliderGroup_hWidth+65,SliderGroup_Ypos-20+SliderGroup_vspacing},size={15,20}
	Button button_FineFWHMDec,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title="<"
	Button button_FineMixInc,pos={SliderGroup_Xpos+SliderGroup_hWidth+85,SliderGroup_Ypos-20+2*SliderGroup_vspacing},size={15,20}
	Button button_FineMixInc,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title=">"
	Button button_FineMixDec,pos={SliderGroup_Xpos+SliderGroup_hWidth+65,SliderGroup_Ypos-20+2*SliderGroup_vspacing},size={15,20}
	Button button_FineMixDec,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title="<"
	Button button_FineAsInc,pos={SliderGroup_Xpos+SliderGroup_hWidth+85,SliderGroup_Ypos-20+SliderGroup_vspacing*3},size={15,20}
	Button button_FineAsInc,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title=">"	
	Button button_FineAsDec,pos={SliderGroup_Xpos+SliderGroup_hWidth+65,SliderGroup_Ypos-20+SliderGroup_vspacing*3},size={15,20}
	Button button_FineAsDec,fSize=10,proc=ButtonProc_MGFit_FineAdjust,title="<"
	Button Button_ConstraintDefaultAll,pos={915,163},size={180,16},proc=ButtonProc_MGFit_DefConstAll,title="Default constraints for all selected"
	Button Button_ConstraintDefaultAll,fSize=10
	
	Button Button_ChangeFineSteps,pos={7,598},size={70,20},proc=ButtonProc_FineStepValues,title="Fine steps.."
	Button Button_ChangeFineSteps,fSize=10
	
	Button Button_CopyPrevious,pos={311,9},size={63,38},proc=ButtonProc_MGFit,title="Copy from\r previous"
	Button Button_CopyPrevious,fSize=10,fColor=(1,52428,26586)

	
	CheckBox check_DisplayOriginal,pos={10,28},size={50,15},title="Original",value= 0,proc=CheckProc_MGFit_DisplayOrgBG
  	CheckBox check_DisplayBg,pos={70,28},size={69,15},title="Background",value= 0,proc=CheckProc_MGFit_DisplayOrgBG
	CheckBox check_DispFit,pos={282,51},size={59,15},proc=CheckProc_MGFit_DispFit,title="Show fit result"
	
	Display/W=(12,71,366,317)/HOST=SLP_MultiGLAFit_01 
	RenameWindow #,G0
	SetActiveSubwindow ##
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
	If (Dimsize(SLP_MGFit_DataListW,0)>0)
		String DataName=SLP_MGFit_DataListW[GDataRow][0]
		SLP_MGFit_DisplaySelectedData(DataName)
	EndIf
End

Function ButtonProc_MGFit(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			StrSwitch (ba.ctrlName)
				case "Button_CopyPrevious":
					SLP_MGFit_CopyPrevious()
					Break
				case "Button_Rescale":
					Setaxis /A /W=SLP_MultiGLAFit_01#G0
					Break
				
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_MGFit_Init()
	String Current_folder=getdatafolder(1)
	NewDataFolder /O  root:Package_SLP
	NewDataFolder /O  root:Package_SLP:MGFit 
	SetDataFolder root:Package_SLP:MGFit
	
	variable /G N_peaks=1
	
	Variable /G MaxN_peaks=64
	variable /G GDataRow=0
	
	variable /G GLA_int=0
	variable /G GLA_pos=0
	variable /G GLA_fwhm=0
	variable /G GLA_mix=0
	variable /G GLA_as=0

	variable /G Init_int=1
	variable /G Init_pos=0
	variable /G Init_fwhm=1
	variable /G Init_mix=0.5
	variable /G Init_as=0.5
	
	variable /G PosRange=0
	variable /G Pos_pm_flg=0
	
	variable /G Gss_Chisq
	variable /G Fit_Chisq
	
	variable /G LowX //to calculate area under curve
	variable /G HighX //to calculate area under curve
	
	variable /G AreaRatio
	
	variable /G FineIntStep=0.01
	variable /G FinePosStep=0.01
	variable /G fineFwhmStep=0.05
	variable /G fineMixStep=0.001
	variable /G fineAsStep=0.001
	
	String /G ExtraConstraints=""
	
	//DataListW//
	Make /O/T/N=(0,64) SLP_MGFit_DataListW
	SetDimLabel 1,0,DataName,SLP_MGFit_DataListW
	SetDimLabel 1,1,DataFolder,SLP_MGFit_DataListW
	SetDimLabel 1,2,OrgData,SLP_MGFit_DataListW
	SetDimLabel 1,3,N_Peaks,SLP_MGFit_DataListW
	SetDimLabel 1,4,Peak_Sel,SLP_MGFit_DataListW
	SetDimLabel 1,5,BG_Type,SLP_MGFit_DataListW
	SetDimLabel 1,6,BG_Param0,SLP_MGFit_DataListW
	SetDimLabel 1,7,BG_Param1,SLP_MGFit_DataListW
	SetDimLabel 1,8,BG_Param2,SLP_MGFit_DataListW
	SetDimLabel 1,9,BG_Param3,SLP_MGFit_DataListW
	SetDimLabel 1,10,BG_Param4,SLP_MGFit_DataListW
	SetDimLabel 1,11,BG_Param5,SLP_MGFit_DataListW
	SetDimLabel 1,12,BG_Param6,SLP_MGFit_DataListW
	SetDimLabel 1,13,BG_Param7,SLP_MGFit_DataListW
	SetDimLabel 1,14,BG_Param8,SLP_MGFit_DataListW
	SetDimLabel 1,15,GssChiSq,SLP_MGFit_DataListW
	SetDimLabel 1,16,FitChiSq,SLP_MGFit_DataListW
	SetDimLabel 1,17,ShowFit_Flg,SLP_MGFit_DataListW //Show fit result instead of guess
	SetDimLabel 1,18,LowX,SLP_MGFit_DataListW //For area under curve calculations
	SetDimLabel 1,19,HighX,SLP_MGFit_DataListW //For area under curve calculations
	SetDimLabel 1,20,XConstraints,SLP_MGFit_DataListW //Extra constraints e.g. K1>K2..
	SetDimLabel 1,21,FitData_Flg,SLP_MGFit_DataListW

	//DataListDisplayW//
	Make /O/T/N=(0,16) SLP_MGFit_DataListDisplayW
	SetDimLabel 1,0,Select,SLP_MGFit_DataListDisplayW
	SetDimLabel 1,1,DataName,SLP_MGFit_DataListDisplayW
	SetDimLabel 1,2,DataNote,SLP_MGFit_DataListDisplayW
	Make /O/N=(0,16) SLP_MGFit_DataListDisplaySelW
	
	Make /O/T/N=(MaxN_peaks,16) SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,0,Select,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,1,PeakName,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,2,PeakNote,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,3,Int,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,4,Pos,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,5,FWHM,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,6,Mix,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,7,As,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,8,RInt,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,9,RPos,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,10,RFWHM,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,11,RMix,SLP_MGFit_iCoefGuessDisplayW
	SetDimLabel 1,12,RAs,SLP_MGFit_iCoefGuessDisplayW
	SLP_MGFit_iCoefGuessDisplayW[][1]="p"+num2str(p)
	SLP_MGFit_iCoefGuessDisplayW[][3]=num2str(Init_int)
	SLP_MGFit_iCoefGuessDisplayW[][4]=num2str(Init_pos)
	SLP_MGFit_iCoefGuessDisplayW[][5]=num2str(Init_fwhm)
	SLP_MGFit_iCoefGuessDisplayW[][6]=num2str(Init_mix)
	SLP_MGFit_iCoefGuessDisplayW[][7]=num2str(Init_as)
	
	Make /O/N=(MaxN_peaks,16,2) SLP_MGFit_iCoefGuessDisplaySelW //Layer2 = cell color
	SLP_MGFit_iCoefGuessDisplaySelW[][0][0]=32 //Checkbox (unchecked)
	SLP_MGFit_iCoefGuessDisplaySelW[][2,7][0]=2 //Editable (peak description)
	
	Make /O/T/N=(5,8) SLP_MGFit_ConstraintDisplayW
	SetDimLabel 1,0,CoefName,SLP_MGFit_ConstraintDisplayW
	SetDimLabel 1,1, MinimumVal,SLP_MGFit_ConstraintDisplayW
	SetDimLabel 1,2, MaximumVal,SLP_MGFit_ConstraintDisplayW
	SetDimLabel 1,3,Hold,SLP_MGFit_ConstraintDisplayW
	SetDimLabel 1,4,Kn,SLP_MGFit_ConstraintDisplayW
	SLP_MGFit_ConstraintDisplayW[0][0]={"Intensity","Position","FWHM","Mixture","Assymetry"}
	SLP_MGFit_ConstraintDisplayW[0][1]={"0","NaN","0.3","0.01","0.01"}
	SLP_MGFit_ConstraintDisplayW[0][2]={"NaN","NaN","5","0.99","0.99"}
	Duplicate /O/T SLP_MGFit_ConstraintDisplayW,SLP_MGFit_DefaultConstraintW
	
	Make /O/N=(5,8,2) SLP_MGFit_ConstraintDisplaySelW //Layer2 = cell color
	SLP_MGFit_ConstraintDisplaySelW[][1,2][0]=2
	SLP_MGFit_ConstraintDisplaySelW[][3][0]=32
	Duplicate /O SLP_MGFit_ConstraintDisplaySelW,SLP_MGFit_DefaultConstraintSelW

	Make /O/T/N=(6,32) SLP_MGFit_PeakLibraryW
	SetDimLabel 1,0,Select,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,1,Name,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,2,PeakNote,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,3,Int,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,4,Pos,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,5,FWHM,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,6,Mix,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,7,As,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,9,IntMin,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,10,IntMax,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,11,PosMin,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,12,PosMax,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,13,FWHMMin,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,14,FWHMMax,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,15,MixMin,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,16,MixMax,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,17,AsMin,SLP_MGFit_PeakLibraryW
	SetDimLabel 1,18,AsMax,SLP_MGFit_PeakLibraryW
	SLP_MGFit_PeakLibraryW[0][1]={{"C1s Atomic"},{""},{"1"},{"283"},{"1"},{"0.5"},{"0.5"}}
	SLP_MGFit_PeakLibraryW[1][1]={{"C1s C-C"},{""},{"1"},{"284"},{"1"},{"0.5"},{"0.5"}}
	SLP_MGFit_PeakLibraryW[2][1]={{"C1s C-OH"},{""},{"1"},{"285"},{"1"},{"0.5"},{"0.5"}}
	SLP_MGFit_PeakLibraryW[3][1]={{"C1s C=O"},{""},{"1"},{"286"},{"1"},{"0.5"},{"0.5"}}
	SLP_MGFit_PeakLibraryW[4][1]={{"C1s COOH"},{""},{"1"},{"288"},{"1"},{"0.5"},{"0.5"}}
	SLP_MGFit_PeakLibraryW[5][1]={{"C1s C-NH3"},{""},{"1"},{"285"},{"1"},{"0.5"},{"0.5"}}
	
	Make /O/N=(6,32) SLP_MGFit_PeakLibrarySelW
	SLP_MGFit_PeakLibrarySelW[][0]=32
	SLP_MGFit_PeakLibrarySelW[][2]=2
	
	Make/O/W/U ListColors= {{0,0,0},{65535,0,0},{30000,30000,50000},{0,0,65535},{0,65535,65535}}
	MatrixTranspose ListColors
	
	make /O/T /N=(2,16) SLP_MGFit_CurveAreaW
	SLP_MGFit_CurveAreaW=""
	make /O/T /N=(3,MaxN_peaks) SLP_MGFit_PeakAreaW
	SLP_MGFit_PeakAreaW=""
	SLP_MGFit_PeakAreaW[0][]="p"+num2str(q)
	
	
		
	Setdatafolder $Current_folder
End

Function SetVarProc_MGFit_AreaUnderCurve(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			SLP_MGFit_ReadAreaUnderCurve(DataName)
			NVAR LowX=root:Package_SLP:MGFit:LowX
			NVAR HighX=root:Package_SLP:MGFit:HighX
			SLP_MGFit_DataListW[DataRow][18]=num2str(LowX)
			SLP_MGFit_DataListW[DataRow][19]=num2str(HighX)
			SLP_MGFit_DrawVLine(dVal)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function ButtonProc_MGFit_AddLibItemGss(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			Variable PeakRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			
			Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
			Wave SLP_MGFit_PeakLibrarySelW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW

			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			String ConstraintW_FName=DataLocation+"ConstraintW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			Wave ConstraintW=$ConstraintW_FName
			
			String PeakName=CoefGuessDispW[PeakRow][1]
			String PeakNote=CoefGuessDispW[PeakRow][2]
			variable int=str2num(CoefGuessDispW[PeakRow][3]),pos=str2num(CoefGuessDispW[PeakRow][4])
			variable fwhm=str2num(CoefGuessDispW[PeakRow][5]),mix=str2num(CoefGuessDispW[PeakRow][6])
			Variable as=str2num(CoefGuessDispW[PeakRow][7])
			
			variable int_min=ConstraintW[0][0][PeakRow],pos_min=ConstraintW[1][0][PeakRow],fwhm_min=ConstraintW[2][0][PeakRow],mix_min=ConstraintW[3][0][PeakRow],as_min=ConstraintW[4][0][PeakRow]
			variable int_max=ConstraintW[0][1][PeakRow],pos_max=ConstraintW[1][1][PeakRow],fwhm_max=ConstraintW[2][1][PeakRow],mix_max=ConstraintW[3][1][PeakRow],as_max=ConstraintW[4][1][PeakRow]
				
			Redimension /N=(dimsize(SLP_MGFit_PeakLibraryW,0)+1,dimsize(SLP_MGFit_PeakLibraryW,1))  SLP_MGFit_PeakLibraryW
			Redimension /N=(dimsize(SLP_MGFit_PeakLibrarySelW,0)+1,dimsize(SLP_MGFit_PeakLibrarySelW,1))  SLP_MGFit_PeakLibrarySelW
			SLP_MGFit_PeakLibrarySelW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][0]=32
			SLP_MGFit_PeakLibrarySelW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][2]=2
		
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][1]=PeakName
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][2]=PeakNote
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][3]=Num2str(int)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][4]=Num2str(pos)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][5]=Num2str(fwhm)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][6]=Num2str(mix)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][7]=Num2str(as)
		
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][8]=Num2str(int_min)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][9]=Num2str(int_max)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][10]=Num2str(pos_min)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][11]=Num2str(pos_max)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][12]=Num2str(fwhm_min)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][13]=Num2str(fwhm_max)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][14]=Num2str(mix_min)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][15]=Num2str(mix_max)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][16]=Num2str(as_min)
			SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][17]=Num2str(as_min)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_AddLibItem(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			String PeakName,PeakNote
			variable int=NaN,pos=NaN,fwhm=NaN,mix=NaN,as=NaN
			variable int_min=NaN,pos_min=NaN,fwhm_min=NaN,mix_min=NaN,as_min=NaN
			variable int_max=NaN,pos_max=NaN,fwhm_max=NaN,mix_max=NaN,as_max=NaN
			
			Prompt PeakName,"Peak Name"
			Prompt PeakNote,"Note"
			Prompt int,"Intensity"
			Prompt pos,"Position"
			prompt fwhm,"FWHM"
			prompt mix,"Mixture"
			prompt as,"Asymmetry"
			Doprompt "Enter peak parameters",PeakName,PeakNote,int,pos,fwhm,mix,as
			
			If (V_Flag==0) //If user clicks ok
				Prompt int_min,"Min intensity"
				Prompt int_max,"Max intensity"
				Prompt pos_min,"Min position"
				Prompt pos_max,"Max position"
				prompt fwhm_min,"Min FWHM"
				prompt fwhm_max,"Max FWHM"
				prompt mix_Min,"Min mixture"
				prompt mix_Max,"Max mixture"
				prompt as_min,"Min Asymmetry"
				prompt as_max,"Max Asymmetry"
				Doprompt "Enter peak parameters",int_min,int_max,pos_min,pos_max,fwhm_min,fwhm_max,mix_min,mix_max,as_min,as_max
				
				If (V_Flag==0) //if user clicks ok
					Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
					Wave SLP_MGFit_PeakLibrarySelW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW
					Redimension /N=(dimsize(SLP_MGFit_PeakLibraryW,0)+1,dimsize(SLP_MGFit_PeakLibraryW,1))  SLP_MGFit_PeakLibraryW
					Redimension /N=(dimsize(SLP_MGFit_PeakLibrarySelW,0)+1,dimsize(SLP_MGFit_PeakLibrarySelW,1))  SLP_MGFit_PeakLibrarySelW
					SLP_MGFit_PeakLibrarySelW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][0]=32
					SLP_MGFit_PeakLibrarySelW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][2]=2
				
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][1]=PeakName
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][2]=PeakNote
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][3]=Num2str(int)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][4]=Num2str(pos)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][5]=Num2str(fwhm)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][6]=Num2str(mix)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][7]=Num2str(as)
				
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][8]=Num2str(int_min)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][9]=Num2str(int_max)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][10]=Num2str(pos_min)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][11]=Num2str(pos_max)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][12]=Num2str(fwhm_min)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][13]=Num2str(fwhm_max)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][14]=Num2str(mix_min)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][15]=Num2str(mix_max)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][16]=Num2str(as_min)
					SLP_MGFit_PeakLibraryW[dimsize(SLP_MGFit_PeakLibrarySelW,0)-1][17]=Num2str(as_min)
				EndIf
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_ExportGraph(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			Variable PeakRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			String DataW_FName=DataLocation+DataName	//Raw data
			String BgW_FName=DataW_FName+"_BG"		//Background
			String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
			String Data_GssW_FName=DataW_FName+"_Gss"	//Guess curve
			Wave Data_nBGW=$Data_nBGW_FName
			
			String TraceList=TraceNameList("SLP_MultiGLAFit_01#G0",";",1)
			Variable N_curves=Itemsinlist(TraceList,";")
			String NewFolderName=":"+DataName
			String TraceName=""
			String orgW_FName=""
			String destW_Name=""
			variable i=0
			variable run_flg=0
			String LegendStr=DataName+"\r\Zr080"
			String FolderExistsWarning="Enter new folder name?"
			
			//Check if the folder to keep waves already exists
			If (!DataFolderExists(NewFolderName))
				run_flg=1
			Else
				DoAlert 1,NewFolderName+" folder already exists. Overwrite existing waves?"
				If (V_Flag==1) //Click yes
					run_flg=1
				Else //Click no
					Do
						DoAlert 1,FolderExistsWarning
						If (V_Flag==1)
							Prompt NewFolderName,"New folder:"
							DoPrompt "Enter new folder name",NewFolderName
							run_flg=1
						Else
							run_flg=0
						EndIf
						FolderExistsWarning="Still duplicated name. Enter new folder name?"
					While (run_flg!=0&&DataFolderExists(NewFolderName))
				Endif
			EndIf
			
			If (run_flg)
				NewDataFolder /O $NewFolderName				
				For (i=0;i<N_curves;i+=1)
					TraceName=StringFromList(i,TraceList)
					orgW_FName=DataLocation+TraceName
					destW_Name=NewFolderName+":"+TraceName
					duplicate /O $orgW_FName,$destW_Name
				EndFor	
				
				String Current_folder=getdatafolder(1)
				SetDataFolder $NewFolderName
				
				TraceName=StringFromList(0,TraceList)
				Display $TraceName
				ModifyGraph mode($TraceName)=7,hbFill($TraceName)=2,rgb($TraceName)=(65535,49151,49151)
				For (i=1;i<N_curves;i+=1)
					TraceName=StringFromList(i,TraceList)
					Appendtograph $TraceName
					Variable FitDisplay_Flg=str2num(SLP_MGFit_DataListW[DataRow][17])
					If (FitDisplay_Flg==0) //Display Guess curves
						//Modify the graph and trace colors
						If (i==1)//Data Wave (BG subtracted)
							Modifygraph mode($TraceName)=3, Marker($TraceName)=16, rgb($TraceName)=(43690,43690,43690)
							LegendStr+="\s("+TraceName+")"+"Data w/o BG\r"
						ElseIf (i==2) //Guess Wave
							ModifyGraph rgb($TraceName)=(1,34817,52428), lsize($TraceName)=3
							LegendStr+="\s("+TraceName+")Guess curve\r"
						Elseif (i==PeakRow+3)//Selected peak
							ModifyGraph rgb($TraceName)=(65535,43690,0),lsize($TraceName)=1.5
							LegendStr+="\s("+TraceName+")Selected component\r"
						EndIf
					Elseif (FitDisplay_Flg==1)	//Display fit results
						If (i==1)
							Modifygraph mode($TraceName)=3, Marker($TraceName)=16, rgb($TraceName)=(43690,43690,43690)
							LegendStr+="\s("+TraceName+")"+"Data w/o BG\r"
						Elseif (i==2)//Fit Wave
							ModifyGraph rgb($TraceName)=(0,35000,0), lsize($TraceName)=3
							LegendStr+="\s("+TraceName+")Fit result\r"
						Elseif (i==PeakRow+3) //Selected peak
							ModifyGraph rgb($TraceName)=(65535,43690,0),lsize($TraceName)=1.5
							LegendStr+="\s("+TraceName+")Selected component\r"
						EndIf
					EndIf
				EndFor
				
				//Orginal data w (before BG) and BG waves display
				Wavestats /Q Data_nBGW
				Variable OrgData_yOffset=(V_Max-V_Min)*1.10 //Determine offset value from the data y-range
				
				ControlInfo /W=SLP_MultiGLAFit_01 Check_DisplayOriginal; variable DisplayOrg_Flg=V_Value
				If (DisplayOrg_Flg)
					TraceName=StringFromList(ItemsInlist(TraceList,";")-2,TraceList,";")
					ModifyGraph offset($TraceName)={0,OrgData_yOffset},rgb($TraceName)=(30000,30000,30000)
					LegendStr+="\s("+TraceName+")Original data\r"
				EndIf
				
				ControlInfo /W=SLP_MultiGLAFit_01 Check_DisplayBG; variable DisplayBg_Flg=V_Value
				If (DisplayBg_Flg)
					TraceName=StringFromList(ItemsInlist(TraceList,";")-1,TraceList,";")
					ModifyGraph offset($TraceName)={0,OrgData_yOffset}, lstyle($TraceName)=2,rgb($TraceName)=(30000,30000,30000)
					LegendStr+="\s("+TraceName+")Background\r"
				EndIf
				
				SetDataFolder $Current_folder
				
				Modifygraph mirror=1,minor=1,tick=2
				LegendStr=removeending(LegendStr,"\r")
				Legend LegendStr
				
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function ButtonProc_MGFit_AcceptFit(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
				
			DoAlert 1,"Overwrite the guess values with the fitted coefficients."
			
			If (V_Flag==1)
				Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
				
				String DataName=SLP_MGFit_DataListW[DataRow][0]
				String DataLocation=SLP_MGFit_DataListW[DataRow][1]
				String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
				Wave /T CoefGuessDispW=$CoefGuessDispW_FName
				
				CoefGuessDispW[][3]=CoefGuessDispW[p][8]
				CoefGuessDispW[][4]=CoefGuessDispW[p][9]
				CoefGuessDispW[][5]=CoefGuessDispW[p][10]
				CoefGuessDispW[][6]=CoefGuessDispW[p][11]
				CoefGuessDispW[][7]=CoefGuessDispW[p][12]
				
				SLP_MGFit_DataListW[DataRow][17]="0"
				SLP_MGFit_DisplaySelectedData(DataName)
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_SaveGssAsTxt(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			
			Make /O/T/N=(dimsize(CoefGuessDispW,0)+1,dimsize(CoefGuessDispW,1)) root:Package_SLP:MGFit:SLP_MGFit_GssExportW /Wave=SLP_MGFit_GssExportW
			SLP_MGFit_GssExportW=""
			
			Variable i=0
			For (i=0;i<dimsize(CoefGuessDispW,0);i+=1)
				SLP_MGFit_GssExportW[i+1][]=CoefGuessDispW[i][q]
			EndFor
			For (i=0;i<dimsize(CoefGuessDispW,1);i+=1)
				SLP_MGFit_GssExportW[0][i]=GetDimLabel(CoefGuessDispW,1,i)
			EndFor
			
			String GssFileName="GuessExport"
			Save/G /I /M="\n" SLP_MGFit_GssExportW as GssFileName
			
			Killwaves SLP_MGFit_GssExportW
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_LoadGssFile(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			
			LoadWave /J /M  /K=2 /N=GssData /U={0,0,1,0}
			If (V_Flag!=0) //If user doesn't click 'Cancel'
				String NewGssWaveName=stringfromlist(0,S_Wavenames)
				Wave NewGssWave=$NewGssWaveName
				Duplicate /O /T NewGssWave,CoefGuessDispW
				Killwaves NewGssWave
				//Make /O /N=(dimsize(CoefGuessDispW,0),dimsize(CoefGuessDispW,1),2) $CoefGuessDispSelW_FName /Wave=CoefGuessDispSelW
				Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
				CoefGuessDispSelW[][][0]=0
				CoefGuessDispSelW[][0][0]=32
				CoefGuessDispSelW[][2,7][0]=2
				
				SLP_MGFit_DisplaySelectedData(DataName)
			Endif
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_LoadLibFile(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW

			LoadWave /J /M  /K=2 /N=LibData /U={0,0,1,0}
			String NewLibWaveName=stringfromlist(0,S_Wavenames)
			Wave NewLibWave=$NewLibWaveName
			Duplicate /O /T NewLibWave,SLP_MGFit_PeakLibraryW
			Killwaves NewLibWave
			Make /O /N=(dimsize(SLP_MGFit_PeakLibraryW,0),dimsize(SLP_MGFit_PeakLibraryW,1)) root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW /Wave=SLP_MGFit_PeakLibrarySelW
			SLP_MGFit_PeakLibrarySelW=0
			SLP_MGFit_PeakLibrarySelW[][0]=32
			SLP_MGFit_PeakLibrarySelW[][2]=2
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_SaveLibAsTxt(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
		
			Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
			
			Make /O/T/N=(dimsize(SLP_MGFit_PeakLibraryW,0)+1,dimsize(SLP_MGFit_PeakLibraryW,1)) root:Package_SLP:MGFit:SLP_MGFit_PeakLibExportW /Wave=SLP_MGFit_PeakLibExportW
			SLP_MGFit_PeakLibExportW=""
			Variable i=0
			For (i=0;i<dimsize(SLP_MGFit_PeakLibraryW,0);i+=1)
				SLP_MGFit_PeakLibExportW[i+1][]=SLP_MGFit_PeakLibraryW[i][q]
			EndFor
			SLP_MGFit_PeakLibExportW[0][0]={{""},{"Peak name"},{"Note"},{"Int"},{"Pos"},{"FWHM"},{"Mix"},{"As"},{"Min Int"},{"Max Int"},{"Min Pos"},{"Max Pos"},{"Min FWHM"},{"Max FWHM"},{"Min Mix"},{"Max Mix"},{"Min As"},{"Max As"}}
			
			String LibFileName="LibraryExport"
			Save/G /I /M="\n" SLP_MGFit_PeakLibExportW as LibFileName
			
			Killwaves SLP_MGFit_PeakLibExportW
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_RemoveFromLib(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Doalert 2,"Remove selected peak(s) from library?"
			If (V_Flag==1)
				Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
				Wave SLP_MGFit_PeakLibrarySelW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW
				Variable N_LibItems=dimsize(SLP_MGFit_PeakLibraryW,0)
				Variable i
				For (i=N_LibItems-1;i>=0;i-=1) //Remove from the last one
					If (dimsize(SLP_MGFit_PeakLibraryW,0)==1)
						SLP_MGFit_PeakLibraryW[0][]=""
						SLP_MGFit_PeakLibraryW[0][2]="Library empty"
						//SLP_MGFit_PeakLibrarySelW[0][]=0
					ElseIf (SLP_MGFit_PeakLibrarySelW[i][0]==48)
						DeletePoints i,1,SLP_MGFit_PeakLibraryW
						DeletePoints i,1,SLP_MGFit_PeakLibrarySelW
					EndIf
				EndFor
			
			EndIf
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_EditLib(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
			DoWindow /K SLP_MGFit_PeakLibraryEdit_01
			Edit /K=1/N=SLP_MGFit_PeakLibraryEdit_01 SLP_MGFit_PeakLibraryW
			ModifyTable /W=SLP_MGFit_PeakLibraryEdit_01 horizontalIndex=2,rgb=(0,0,65535)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_ImportFromLib(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			Variable PeakRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			
			Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
			Wave  SLP_MGFit_ConstraintDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW

			Wave /T SLP_MGFit_PeakLibraryW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibraryW
			Wave SLP_MGFit_PeakLibrarySelW=root:Package_SLP:MGFit:SLP_MGFit_PeakLibrarySelW
			
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			String ConstraintW_FName=DataLocation+"ConstraintW"
			
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			Wave ConstraintW=$ConstraintW_FName
			
			Variable i=0
			Variable j=PeakRow
			For (i=0;i<dimsize(SLP_MGFit_PeakLibraryW,0);i+=1)
				If (SLP_MGFit_PeakLibrarySelW[i][0]==48)
					//Note
					CoefGuessDispW[j][2]=SLP_MGFit_PeakLibraryW[i][2]
					//Guess
					CoefGuessDispW[j][3]=SLP_MGFit_PeakLibraryW[i][3]	//int
					CoefGuessDispW[j][4]=SLP_MGFit_PeakLibraryW[i][4]	//pos
					CoefGuessDispW[j][5]=SLP_MGFit_PeakLibraryW[i][5]	//fwhm
					CoefGuessDispW[j][6]=SLP_MGFit_PeakLibraryW[i][6]	//mix
					CoefGuessDispW[j][7]=SLP_MGFit_PeakLibraryW[i][7]	//as
					//Constraints
					ConstraintW[0][0][j]=str2num(SLP_MGFit_PeakLibraryW[i][8])	//int min
					ConstraintW[0][1][j]=str2num(SLP_MGFit_PeakLibraryW[i][9])	//int max
					ConstraintW[1][0][j]=str2num(SLP_MGFit_PeakLibraryW[i][10])	//pos min
					ConstraintW[1][1][j]=str2num(SLP_MGFit_PeakLibraryW[i][11])	//pos max
					ConstraintW[2][0][j]=str2num(SLP_MGFit_PeakLibraryW[i][12])	//fwhm min
					ConstraintW[2][1][j]=str2num(SLP_MGFit_PeakLibraryW[i][13])	//fwhm max
					ConstraintW[3][0][j]=str2num(SLP_MGFit_PeakLibraryW[i][14])	//mix min
					ConstraintW[3][1][j]=str2num(SLP_MGFit_PeakLibraryW[i][15])	//mix max
					ConstraintW[4][0][j]=str2num(SLP_MGFit_PeakLibraryW[i][16])	//as min
					ConstraintW[4][1][j]=str2num(SLP_MGFit_PeakLibraryW[i][17])	//as max
					
					j+=1
				Endif
			EndFor
			
			SLP_MGFit_DisplaySelectedData(DataName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_EditConstDef(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_MGFit_Panel_DefConstraints()
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_MGFit_Pos_pm_flg(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			Wave SLP_MGFit_DefaultConstraintSelW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintSelW
			SLP_MGFit_DefaultConstraintSelW[1][1,2]=!checked*2
			SetVariable setvar_PlusMinus disable=!checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_MGFit_DispFit(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			SLP_MGFit_DataListW[DataRow][17]=num2str(checked)
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			SLP_MGFit_DisplaySelectedData(DataName)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_ConstraintDone(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow /K MGFit_DefaultConstraint
			
		break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function ButtonProc_MGFit_CopyGssParam(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
			String DataW_List=""
			Variable i=0
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			
			For (i=0;i<dimsize(SLP_MGFit_DataListW,0);i+=1)
				If (i!=DataRow)
					DataW_List+=SLP_MGFit_DataListW[i][0]+";"
				EndIf
			EndFor
			
			String Org_DataName=""
			Prompt Org_DataName,"Data to copy from..",popup,DataW_List
			DoPrompt "Choose the data to copy parameters from:",Org_DataName
			If (V_Flag==0) //If user click continue
				SLP_MGFit_CopyParam(Org_DataName,DataName)
			EndIf 
			
			SLP_MGFit_DisplaySelectedData(DataName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_MGFit_CopyBG()
	//Copy BG from prev. scan
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	Variable i=0
	For (i=5;i<=14;i+=1)
		SLP_MGFit_DataListW[DataRow][i]=SLP_MGFit_DataListW[DataRow-1][i]
	EndFor
	String BG_type
	Variable FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX
	BG_type=SLP_MGFit_DataListW[DataRow][5]
	FlatBG=str2num(SLP_MGFit_DataListW[DataRow][6])
	StepPos=str2num(SLP_MGFit_DataListW[DataRow][7])
	StepHeight=str2num(SLP_MGFit_DataListW[DataRow][8])
	Width=str2num(SLP_MGFit_DataListW[DataRow][9])
	Atten=str2num(SLP_MGFit_DataListW[DataRow][10])
	StartX=str2num(SLP_MGFit_DataListW[DataRow][11])
	EndX=str2num(SLP_MGFit_DataListW[DataRow][12])
	
	SLP_MGFit_MakeBG(DataName,BG_type,FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX)
	//SLP_MGFit_DisplaySelectedData(DataName)
End

Function SLP_MGFit_CopyPrevious()
	//Copy BG from prev. scan
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	
	SLP_MGFit_CopyBG()
	
	//Low and High X
	SLP_MGFit_DataListW[DataRow][18]=SLP_MGFit_DataListW[DataRow-1][18]
	SLP_MGFit_DataListW[DataRow][19]=SLP_MGFit_DataListW[DataRow-1][19]
	
	//Param
	String Org_DataName=SLP_MGFit_DataListW[DataRow-1][0]
	SLP_MGFit_CopyParam(Org_DataName,DataName)
	
	SLP_MGFit_DisplaySelectedData(DataName)
End

Function SLP_MGFit_CopyParam(Org_DataName,Dest_DataName)
	String Org_DataName,Dest_DataName
	
	Variable Org_DataRow=SLP_MGFit_FindDataRow(Org_DataName)
	Variable Dest_DataRow=SLP_MGFit_FindDataRow(Dest_DataName)
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
	
	String Org_CoefGuessDispW_FName=SLP_MGFit_DataListW[Org_DataRow][1]+"CoefGuessDispW"
	String Org_CoefGuessDispSelW_FName=SLP_MGFit_DataListW[Org_DataRow][1]+"CoefGuessDispSelW"
	String Org_CoefGuessM_FName=SLP_MGFit_DataListW[Org_DataRow][1]+"CoefGuessM"
	String Org_ConstraintW_FName=SLP_MGFit_DataListW[Org_DataRow][1]+"ConstraintW"
	
	String Dest_CoefGuessDispW_FName=SLP_MGFit_DataListW[Dest_DataRow][1]+"CoefGuessDispW"
	String Dest_CoefGuessDispSelW_FName=SLP_MGFit_DataListW[Dest_DataRow][1]+"CoefGuessDispSelW"
	String Dest_CoefGuessM_FName=SLP_MGFit_DataListW[Dest_DataRow][1]+"CoefGuessM"
	String Dest_ConstraintW_FName=SLP_MGFit_DataListW[Dest_DataRow][1]+"ConstraintW"
	
	Duplicate /T/O $Org_CoefGuessDispW_FName,$Dest_CoefGuessDispW_FName
	Duplicate /O $Org_CoefGuessDispSelW_FName,$Dest_CoefGuessDispSelW_FName
	Duplicate /O $Org_CoefGuessM_FName,$Dest_CoefGuessM_FName
	Duplicate /O $Org_ConstraintW_FName,$Dest_ConstraintW_FName
	
End

Function ButtonProc_MGFit_HoldAllTogg(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			Wave ConstraintDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW
			If (ConstraintDisplaySelW[0][3][0]==32)
				ConstraintDisplaySelW[][3][0]=48
			Elseif (ConstraintDisplaySelW[0][3][0]==48)
				ConstraintDisplaySelW[][3][0]=32
			Endif
			SLP_MGFit_Listbox2ConstraintW(DataName)
			SLP_MGFit_ConstraintLogic(DataName)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_MGFit_ConstraintLogic1p(DataName,PeakRow)
	String DataName
	Variable PeakRow
	//Logic:
	//	- If hold - do not constraint
	//	- Guess should be within constraint level
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataW_FName=DataLocation+DataName 
	
	String CoefGuessDispW_FName=SLP_MGFit_DataListW[DataRow][1]+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=SLP_MGFit_DataListW[DataRow][1]+"CoefGuessDispSelW"
	String ConstraintW_FName=SLP_MGFit_DataListW[DataRow][1]+"ConstraintW"
	
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	//Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	Wave ConstraintW=$ConstraintW_FName
	
	CoefGuessDispSelW[PeakRow][3,7][1]=0
	
	Variable j=0
	For (j=3;j<=7;j+=1)
		If ((str2num(CoefGuessDispW[PeakRow][j]) < ConstraintW[j-3][0][PeakRow]) || (str2num(CoefGuessDispW[PeakRow][j])>ConstraintW[j-3][1][PeakRow]))
			CoefGuessDispSelW[PeakRow][j][1]=1
		EndIf
		If (ConstraintW[j-3][2][PeakRow]==1)
			CoefGuessDispSelW[PeakRow][j][1]=2
		EndIf
	EndFor

End

Function SLP_MGFit_ConstraintLogic(DataName)
	String DataName
	//Logic:
	//	- If hold - do not constraint
	//	- Guess should be within constraint level
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataW_FName=DataLocation+DataName 
	
	String CoefGuessDispW_FName=SLP_MGFit_DataListW[DataRow][1]+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=SLP_MGFit_DataListW[DataRow][1]+"CoefGuessDispSelW"
	String ConstraintW_FName=SLP_MGFit_DataListW[DataRow][1]+"ConstraintW"
	
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	//Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	Wave ConstraintW=$ConstraintW_FName
	
	CoefGuessDispSelW[][][1]=0
	
	Variable i=0
	Variable j=0
	
	For (i=0;i<dimsize(CoefGuessDispW,0);i+=1)
		For (j=3;j<=7;j+=1)
			If ((str2num(CoefGuessDispW[i][j]) < ConstraintW[j-3][0][i]) || (str2num(CoefGuessDispW[i][j])>ConstraintW[j-3][1][i]))
				CoefGuessDispSelW[i][j][1]=1
			EndIf
			If (ConstraintW[j-3][2][i]==1)
				CoefGuessDispSelW[i][j][1]=2
			EndIf
		EndFor
	EndFor

End

Function SLP_MGFit_MakeBGPrompt(DataName,BG_type)
	String DataName
	String BG_type //"Erf","Flat","Slope","atan","Shirley"
	
	Variable FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX

	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	

	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]

	String DataW_FName=DataLocation+DataName 
	String DataW_BG_FName=DataW_FName+"_BG"
	String DataW_nBG_FName=DataW_FName+"_nBG"
	
	Wave DataW=$DataW_FName
	Wave DataW_BG=$DataW_BG_FName
	Wave DataW_nBG=$DataW_nBG_FName
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][6],""))
		FlatBG=DataW[0]
	Else
		FlatBG=str2num(SLP_MGFit_DataListW[DataRow][6])
	EndIf
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][7],""))
		StepPos=dimoffset(DataW,0)+dimdelta(DataW,0)*dimsize(DataW,0)/2 //in the center
	Else
		StepPos=str2num(SLP_MGFit_DataListW[DataRow][7])
	EndIf
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][8],""))
		StepHeight=DataW[dimsize(DataW,0)-1]-DataW[0]
	Else
		StepHeight=str2num(SLP_MGFit_DataListW[DataRow][8])
	EndIf
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][9],""))
		Width=1
	Else
		Width=str2num(SLP_MGFit_DataListW[DataRow][9])
	EndIf
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][10],""))
		Atten=100000
	Else
		Atten=str2num(SLP_MGFit_DataListW[DataRow][10])
	EndIf
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][11],""))
		StartX=dimoffset(DataW,0)
	Else
		StartX=str2num(SLP_MGFit_DataListW[DataRow][11])
	EndIf
	
	If (Stringmatch(SLP_MGFit_DataListW[DataRow][12],""))
		EndX=dimoffset(DataW,0)+dimdelta(DataW,0)*(dimsize(DataW,0)-1)
	Else
		EndX=str2num(SLP_MGFit_DataListW[DataRow][12])
	EndIf
	
	strswitch(BG_type)	// string switch
		case "Erf":		// execute if case matches expression
			Prompt FlatBG, "Baseline level"
			Prompt StepPos, "Step position"
			Prompt StepHeight, "Step height"
			Prompt Width, "Step width"
			Prompt Atten, "Attenuation"
			DoPrompt "Enter background parameters:",FlatBG,StepPos,StepHeight,Width,Atten
			
			//Record the Input
			SLP_MGFit_DataListW[DataRow][6]=num2str(FlatBG)
			SLP_MGFit_DataListW[DataRow][7]=num2str(StepPos)
			SLP_MGFit_DataListW[DataRow][8]=num2str(StepHeight)
			SLP_MGFit_DataListW[DataRow][9]=num2str(Width)
			SLP_MGFit_DataListW[DataRow][10]=num2str(Atten)
			
			break						// exit from switch
		case "atan":	
			Prompt FlatBG, "Baseline level"
			Prompt StepPos, "Step position"
			Prompt StepHeight, "Step height"
			Prompt Width, "Step width"
			Prompt Atten, "Attenuation"
			DoPrompt "Enter background parameters:",FlatBG,StepPos,StepHeight,Width,Atten
			
			//Record the input
			SLP_MGFit_DataListW[DataRow][6]=num2str(FlatBG)
			SLP_MGFit_DataListW[DataRow][7]=num2str(StepPos)
			SLP_MGFit_DataListW[DataRow][8]=num2str(StepHeight)
			SLP_MGFit_DataListW[DataRow][9]=num2str(Width)
			SLP_MGFit_DataListW[DataRow][10]=num2str(Atten)
			
			break
		case "Slope":	
			Prompt StartX, "Low energy position"
			Prompt EndX, "High energy position"
			DoPrompt "Enter background parameters:",StartX,EndX
			//Record the input
			SLP_MGFit_DataListW[DataRow][11]=num2str(StartX)
			SLP_MGFit_DataListW[DataRow][12]=num2str(EndX)
								
			break
		case "Flat":	
			Prompt FlatBG, "Baseline level"
			DoPrompt "Enter background parameters:",FlatBG
			//Record the input
			SLP_MGFit_DataListW[DataRow][6]=num2str(FlatBG)
			
			break
		case "Shirley":
			Prompt StartX, "Low energy position"
			Prompt EndX, "High energy position"
			DoPrompt "Enter background parameters:",StartX,EndX
			//Record the input
			SLP_MGFit_DataListW[DataRow][11]=num2str(StartX)
			SLP_MGFit_DataListW[DataRow][12]=num2str(EndX)
			
			break
		default:							// optional default expression executed
			DataW_BG=0					// when no case matches
	endswitch
	
	SLP_MGFit_MakeBG(DataName,BG_type,FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX)

End



Function SLP_MGFit_MakeBG(DataName,BG_type,FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX)
	String DataName
	String BG_type //"Erf","Flat","Slope","atan","Shirley"
	Variable FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX

	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	

	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]

	String DataW_FName=DataLocation+DataName 
	String DataW_BG_FName=DataW_FName+"_BG"
	String DataW_nBG_FName=DataW_FName+"_nBG"
	
	Wave DataW=$DataW_FName
	Wave DataW_BG=$DataW_BG_FName
	Wave DataW_nBG=$DataW_nBG_FName

	
	strswitch(BG_type)	// string switch
		case "Erf":		// execute if case matches expression			
			DataW_BG=SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Atten,x)			
			break	
//		case "Erf":		// execute if case matches expression //from Excel Macro - PROBABLY WRONG!
//			DataW_BG=FlatBG+StepHeight/2+(StepHeight/2)*erf((x-StepPos)/Width)*exp(1/(Atten*x))
//			break						// exit from switch
		case "atan":	
			DataW_BG=SLP_Func_atanStep(FlatBG,StepHeight,StepPos,Width,Atten,x)
			break
		case "Slope":	
			DataW_BG=DataW(StartX)*(x<=StartX)+DataW(EndX)*(x>=EndX)+(x>StartX&&x<EndX)*(DataW(StartX)+(x-StartX)*(DataW(EndX)-DataW(StartX))/(EndX-StartX))		
			break
		case "Flat":	
			DataW_BG=FlatBG
			break
		case "Shirley":
			SLP_Util_ShirleyGen(DataW_FName,EndX,StartX,10,0)
			String ShirleyBGW_FName=DataW_FName+"_Shirley"
			Wave ShirleyBGW=$ShirleyBGW_FName
			DataW_BG=ShirleyBGW
			Killwaves ShirleyBGW
			break
		default:							// optional default expression executed
			DataW_BG=0					// when no case matches
	endswitch
	DataW_nBG=DataW-DataW_BG
End

Function PopMenuProc_MGFit_MakeBG(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			
			SLP_MGFit_MakeBGPrompt(DataName,popStr)
			SLP_MGFit_DataListW[DataRow][5]=popStr
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_MGFit_ListBox2CoefMatrix(DataName)
	String DataName
	
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW	
	//Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	String CoefGuessM_FName=DataLocation+"CoefGuessM"
	String ConstraintW_FName=DataLocation+"ConstraintW"
	
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	variable i=0
	variable j=0
	variable N_peak=0
	String Peak_List=""
	
	Make /O /N=(0,5) $CoefGuessM_FName /Wave=CoefGuessM
	CoefGuessM=NaN
	
	For (i=0;i<dimsize(CoefGuessDispW,0);i+=1)
		If (CoefGuessDispSelW[i][0][0]==48)
			Redimension /N=(dimsize(CoefGuessM,0)+1,dimsize(CoefGuessM,1))  CoefGuessM
			CoefGuessM[j][]=str2num(CoefGuessDispW[i][q+3])
			j+=1
		EndIf
	EndFor
	
	SLP_MGFit_DataListW[DataRow][3]=num2str(N_peak)

End

Function SLP_FitFunc_StohrERF(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = FlatBG
	//CurveFitDialog/ w[1] = StepHeight
	//CurveFitDialog/ w[2] = StepPos
	//CurveFitDialog/ w[3] = Width
	//CurveFitDialog/ w[4] = Decay

	return SLP_Func_StohrERF(w[0],w[1],w[2],w[3],w[4],x)
End

Function SLP_FitFunc_atanStep(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = SLP_Func_atanStep(FlatBG,StepHeight,StepPos,Width,Decay,x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = FlatBG
	//CurveFitDialog/ w[1] = StepHeight
	//CurveFitDialog/ w[2] = StepPos
	//CurveFitDialog/ w[3] = Width
	//CurveFitDialog/ w[4] = Decay

	return SLP_Func_atanStep(w[0],w[1],w[2],w[3],w[4],x)
End


Function SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,E)
	//Based on Stohr and Outka (1988)
	Variable FlatBG,StepHeight,StepPos,Width,Decay
	Variable E //To be used as independent variable
	Variable ErfStep,ErfStep_Decay
	
	// ErfStep
	ErfStep = FlatBG+StepHeight/2+(StepHeight/2)*erf((E-StepPos)/(Width/(2*sqrt(ln(4)))))

	// exponential asymmetry:	
	if (E > StepPos+Width)
		ErfStep_Decay = ErfStep*exp(-1*Decay*(E-StepPos-Width))
	else
		ErfStep_Decay = ErfStep
	endif
	
	//Add intensity scaling before returing the value
	return ErfStep_Decay
End

Function SLP_Func_atanStep(FlatBG,StepHeight,StepPos,Width,Decay,E)
	//Based on Stohr and Outka (1988)
	Variable FlatBG,StepHeight,StepPos,Width,Decay
	Variable E //To be used as independent variable
	Variable ErfStep,ErfStep_Decay
	
// atanStep
	ErfStep = FlatBG+StepHeight/2+(StepHeight/pi)*atan((E-StepPos)/(Width/(2*sqrt(ln(4)))))

// exponential asymmetry:	
	if (E > StepPos+Width)
		ErfStep_Decay = ErfStep*exp(-1*Decay*(E-StepPos-Width))
	else
		ErfStep_Decay = ErfStep
	endif
	
	//Add intensity scaling before returing the value
	return ErfStep_Decay
End


Function SLP_MGFit_AddDataW(DataW_FName,Prompt_Flg)
	String DataW_FName //**Must be Full Name only**
	Variable Prompt_Flg
	
	NVAR Init_pos=root:Package_SLP:MGFit:Init_pos
	NVAR Init_int=root:Package_SLP:MGFit:Init_int
	NVAR Init_fwhm=root:Package_SLP:MGFit:Init_fwhm
	NVAR Init_mix=root:Package_SLP:MGFit:Init_mix
	NVAR Init_as=root:Package_SLP:MGFit:Init_as
	NVAR MaxN_peaks=root:Package_SLP:MGFit:MaxN_peaks
	
	NVAR GDataRow=root:Package_SLP:MGFit:GDataRow
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Wave /T SLP_MGFit_DataListDisplayW=root:Package_SLP:MGFit:SLP_MGFit_DataListDisplayW
	Wave SLP_MGFit_DataListDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_DataListDisplaySelW
	
	Variable N_Data=dimsize(SLP_MGFit_DataListW,0)
	
	Wave DataW=$DataW_FName
	String DataW_Name=StringFromList(itemsinlist(DataW_FName,":")-1,DataW_FName,":")
	String DataFolder_Name=RemoveEnding(DataW_FName,DataW_Name)
	Variable N_Peaks=0
	Variable Peask_Sel=0
	
	If (Prompt_Flg)
		Prompt DataW_Name,"Enter data name"
		DoPrompt "Add data wave",DataW_Name
	EndIf
	
	//Save everything in Package folder (separately between different data)
	String NewDataFolder_Name="root:Package_SLP:MGFit:"+DataW_Name
	
	//Check if the folder to keep waves already exists
	Variable run_flg=0
	String FolderExistsWarning="Enter new data name?"
	If (!DataFolderExists(NewDataFolder_Name))
		run_flg=1
	Else
		DoAlert 1,"Adding "+DataW_Name+". Data already exists. Overwrite?"
		If (V_Flag==1) //Click yes
			ListBox ListBox_PeakParam ListWave=root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplayW,SelWave=root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplaySelW
			SLP_Util_RemoveAllTraces("SLP_MultiGLAFit_01#G0")
			SLP_MGFit_DeleteData(DataW_Name)
			N_Data-=1
			run_flg=1
		Else //Click no
			Do
				DoAlert 1,FolderExistsWarning
				If (V_Flag==1)
					Prompt DataW_Name,"New data name:"
					DoPrompt "Enter new data name",DataW_Name
					run_flg=1
				Else
					run_flg=0
				EndIf
				NewDataFolder_Name="root:Package_SLP:MGFit:"+DataW_Name
				FolderExistsWarning="Still duplicated name. Enter new data name?"
			While (run_flg!=0&&DataFolderExists(NewDataFolder_Name))
		Endif
	EndIf
	
	If (run_flg)
		NewDataFolder /O  $NewDataFolder_Name
		
		String DataW_Copy_FName=NewDataFolder_Name+":"+DataW_Name
		String DataW_BG_FName=DataW_Copy_FName+"_BG"
		String DataW_nBG_FName=DataW_Copy_FName+"_nBG"
		String FitW_FName=DataW_nBG_FName+"_Fit"
		String HilightW_FName=NewDataFolder_Name+":HiLightW"
	
		//Copy the DataW - Check whether dX is positive or negative (e.g. XPS)
		If (dimdelta($DataW_FName,0)>0)
			Duplicate /O $DataW_FName,$DataW_Copy_FName
		Else
			SLP_Util_Reverse_Xaxis(DataW_FName,DataW_Copy_FName)
		EndIf
		
		Wave DataW_Copy=$DataW_Copy_FName
		
		Duplicate /O $DataW_Copy_FName,$DataW_BG_FName /Wave=DataW_BG
		Duplicate /O $DataW_Copy_FName,$DataW_nBG_FName /Wave=DataW_nBG
		Duplicate /O $DataW_Copy_FName,$FitW_FName /Wave=FitW
		Duplicate /O $DataW_Copy_FName,$HilightW_FName /Wave=HilightW
		DataW_BG=0
		FitW=0
		HilightW=0
		
		//Add the new wave to the DataListW
		Redimension /N=(dimsize(SLP_MGFit_DataListW,0)+1,64)  SLP_MGFit_DataListW
		SLP_MGFit_DataListW[N_Data][0]=DataW_Name
		SLP_MGFit_DataListW[N_Data][1]=NewDataFolder_Name+":"
		SLP_MGFit_DataListW[N_Data][2]=DataW_FName //Original wave name and location
		SLP_MGFit_DataListW[N_Data][3]="0"
		SLP_MGFit_DataListW[N_Data][4]="0"
		SLP_MGFit_DataListW[N_Data][5]="None" //Background for subtraction
		SLP_MGFit_DataListW[N_Data][17]="0" //Fit display flag
		SLP_MGFit_DataListW[N_Data][18]=num2str(Dimoffset(DataW_Copy,0))
		SLP_MGFit_DataListW[N_Data][19]=num2str(Dimoffset(DataW_Copy,0)+DimDelta(DataW_Copy,0)*(DimSize(DataW_Copy,0)-1))
		
		Redimension /N=(dimsize(SLP_MGFit_DataListDisplayW,0)+1,16)  SLP_MGFit_DataListDisplayW
		SLP_MGFit_DataListDisplayW[N_Data][1]=DataW_Name
		Redimension /N=(dimsize(SLP_MGFit_DataListDisplaySelW,0)+1,16)  SLP_MGFit_DataListDisplaySelW
		SLP_MGFit_DataListDisplaySelW[N_Data][0]=32
		SLP_MGFit_DataListDisplaySelW[N_Data][2]=2
		
		String CoefGuessDispW_FName=NewDataFolder_Name+":CoefGuessDispW"
		Duplicate /T/O root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplayW,$CoefGuessDispW_FName /Wave=CoefGuessDispW
		CoefGuessDispW[][3]=num2str(Init_int)
		//CoefGuessDispW[][4]=num2str(Dimoffset(DataW,0)+DimDelta(DataW,0)*DimSize(DataW,0)/2) //init = center
		CoefGuessDispW[][4]=num2str(Dimoffset(DataW_Copy,0)) //init = min X
		CoefGuessDispW[][5]=num2str(Init_fwhm)
		CoefGuessDispW[][6]=num2str(Init_mix)
		CoefGuessDispW[][7]=num2str(Init_as)
		
		String CoefGuessDispSelW_FName=NewDataFolder_Name+":CoefGuessDispSelW"
		Duplicate /O root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplaySelW,$CoefGuessDispSelW_FName /Wave=CoefGuessDispSelW
		SetDimLabel 2,1,ForeColors,CoefGuessDispSelW				// define plane 1 as Foreground colors
		
		String CoefGuessM_FName=NewDataFolder_Name+":CoefGuessM"
		Make /O/N=(0,5) $CoefGuessM_FName /Wave=CoefGuessM
		//CoefGuessM[][0]=Init_pos
	//	CoefGuessM[][0]=Init_int
	//	CoefGuessM[][1]=(Dimoffset(DataW,0)+DimDelta(DataW,0)*DimSize(DataW,0)/2)
	//	CoefGuessM[][2]=Init_fwhm
	//	CoefGuessM[][3]=Init_mix
	//	CoefGuessM[][4]=Init_as
		
		String ConstraintW_FName=NewDataFolder_Name+":ConstraintW"
		Make /O/N=(5,3,MaxN_peaks) $ConstraintW_FName /Wave=ConstraintW
		ConstraintW[0][0][]=0 //min Int=0
		ConstraintW[2][0][]=0.1 //min FWHM=0.1 eV
		ConstraintW[3][0][]=0.001 //min mix=0.001
		ConstraintW[3][1][]=0.999 //max mix=0.999
		ConstraintW[4][0][]=0.001 //min as=0.001
		ConstraintW[4][1][]=0.999 //min as=0.999
		ConstraintW[][2][]=0 //Hold = 0
		
		String DefaultConstrintW_FName=NewDataFolder_Name+":DefaultConstraint"
	EndIf
End

Function ButtonProc_MGFit_DeleteData(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			DoAlert 1,"Delete "+DataName+"?"
			If (V_Flag==1)
				ListBox ListBox_PeakParam ListWave=root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplayW,SelWave=root:Package_SLP:MGFit:SLP_MGFit_iCoefGuessDisplaySelW
				SLP_Util_RemoveAllTraces("SLP_MultiGLAFit_01#G0")
				SLP_MGFit_DeleteData(DataName)
			EndIf
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_LoadData(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			String SelectedWaveFName=""
			Execute "CreateBrowser prompt=\"Select data wave\", showWaves=1, showVars=0, showStrs=0" 
			//Old style. in Igor7 no need to use Execute
			SVAR S_BrowserList=S_BrowserList
			NVAR V_Flag=V_Flag
			
			if(V_Flag!=0)
				//Add data wave
				SelectedWaveFName=stringfromlist(0,S_BrowserList)
				
				SLP_MGFit_AddDataW(SelectedWaveFName,1)
				
				//Select and display the new data
				Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
				Variable NewDataRow=Dimsize(SLP_MGFit_DataListW,0)-1
				ListBox ListBox_DataList win=SLP_MultiGLAFit_01,SelRow=NewDataRow//Select the new one
				String DataName=SLP_MGFit_DataListW[NewDataRow][0]
				SLP_MGFit_DisplaySelectedData(DataName)
				
			endif
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_Done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Dowindow /K SLP_MultiGLAFit_01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_MGFit_DeleteData(DataName)
	String DataName
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Wave /T SLP_MGFit_DataListDisplayW=root:Package_SLP:MGFit:SLP_MGFit_DataListDisplayW
	Wave SLP_MGFit_DataListDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_DataListDisplaySelW
	
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	
	String DataFolder_FName=SLP_MGFit_DataListW[DataRow][1]
	
	KillDataFolder $DataFolder_FName
	Variable DeleteFolderError_Flg=V_Flag
	
	If (DeleteFolderError_Flg==0)
		DeletePoints DataRow,1,SLP_MGFit_DataListW
		DeletePoints DataRow,1,SLP_MGFit_DataListDisplayW
		DeletePoints DataRow,1,SLP_MGFit_DataListDisplaySelW
	EndIf
End

Function SLP_MGFit_Panel_DefConstraints() : Panel
	DoWindow /K MGFit_DefaultConstraint
	
	PauseUpdate; Silent 1		// building window...
	
	NVAR PosRange=root:Package_SLP:MGFit:PosRange
	NVAR Pos_pm_flg=root:Package_SLP:MGFit:Pos_pm_flg
	
	NewPanel /W=(340,110,550,300) /N=MGFit_DefaultConstraint
	
	Wave SLP_MGFit_DefaultConstraintSelW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintSelW
	
	SetDrawLayer UserBack
	DrawText 9,25,"Default constraints"
	ListBox ListBox_DefConstraints,pos={9,52},size={193,110}
	ListBox ListBox_DefConstraints,listWave=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintW
	ListBox ListBox_DefConstraints,selWave=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintSelW
	ListBox ListBox_DefConstraints,widths={57,41,40,33,7,32,32,32}
	ListBox ListBox_DefConstraints,userColumnResize= 1
	Button button_done,pos={152,166},size={50,20},title="done",proc=ButtonProc_MGFit_ConstraintDone
	CheckBox check_PosPercent,pos={13,31},size={69,15},title="Position (+/-)",variable= Pos_pm_flg,proc=CheckProc_MGFit_Pos_pm_flg
	SetVariable setvar_PlusMinus,pos={100,30},size={50,15},limits={-inf,inf,0},variable=PosRange,title=" ",disable=!Pos_pm_flg
	
	SLP_MGFit_DefaultConstraintSelW[1][1,2]=!Pos_pm_flg*2
	
End

Function ButtonProc_MGFit_DefConstraints(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			Variable PeakRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
			Wave  SLP_MGFit_ConstraintDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW
			Wave /T SLP_MGFit_DefaultConstraintW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintW
			Wave SLP_MGFit_DefaultConstraintSelW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintSelW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			Duplicate /O/T SLP_MGFit_DefaultConstraintW,SLP_MGFit_ConstraintDisplayW
			Duplicate /O SLP_MGFit_DefaultConstraintSelW,SLP_MGFit_ConstraintDisplaySelW
			
			NVAR PosRange=root:Package_SLP:MGFit:PosRange
			NVAR Pos_pm_flg=root:Package_SLP:MGFit:Pos_pm_flg
			
			If (Pos_pm_flg)
				SLP_MGFit_ConstraintDisplayW[1][1]=num2str(str2num(CoefGuessDispW[PeakRow][4])-PosRange)
				SLP_MGFit_ConstraintDisplayW[1][2]=num2str(str2num(CoefGuessDispW[PeakRow][4])+PosRange)
			EndIf
			SLP_MGFit_ConstraintDisplaySelW[1][1][0]=2
			SLP_MGFit_ConstraintDisplaySelW[1][2][0]=2
			
			SLP_MGFit_Listbox2ConstraintW(DataName)
			SLP_MGFit_ConstraintLogic1p(DataName,PeakRow)
			SLP_MGFit_AddKn2Listbox()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_DefConstAll(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			
			String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
			Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
			
			String ConstraintW_FName=DataLocation+"ConstraintW"
			Wave ConstraintW=$ConstraintW_FName
			
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			
			Wave /T SLP_MGFit_DefaultConstraintW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintW
			Wave SLP_MGFit_DefaultConstraintSelW=root:Package_SLP:MGFit:SLP_MGFit_DefaultConstraintSelW
			
			Variable PeakRow=0
			NVAR PosRange=root:Package_SLP:MGFit:PosRange
			NVAR Pos_pm_flg=root:Package_SLP:MGFit:Pos_pm_flg
			
			
			For (PeakRow=0;PeakRow<dimsize(CoefGuessDispSelW,0);PeakRow+=1)
				If (CoefGuessDispSelW[PeakRow][0]==48)
					ConstraintW[][0][PeakRow]=str2num(SLP_MGFit_DefaultConstraintW[p][1])
					ConstraintW[][1][PeakRow]=str2num(SLP_MGFit_DefaultConstraintW[p][2])
					ConstraintW[][2][PeakRow]=(SLP_MGFit_DefaultConstraintSelW[p][3][0]-32)/16
				EndIf
				If (Pos_pm_flg)
					ConstraintW[1][0][PeakRow]=str2num(CoefGuessDispW[PeakRow][4])-PosRange
					ConstraintW[1][1][PeakRow]=str2num(CoefGuessDispW[PeakRow][4])+PosRange
				EndIf
			EndFor
			
			SLP_MGFit_DisplaySelectedData(DataName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_MGFit_DisplaySelectedData(DataName)
	String DataName

	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	//Wave /T SLP_MGFit_CoefGuessDisplayW=root:Package_SLP:MGFit:SLP_MGFit_CoefGuessDisplayW
	Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	String CoefGuessM_FName=DataLocation+"CoefGuessM"
	String ConstraintW_FName=DataLocation+"ConstraintW"
	String HilightW_FName=DataLocation+"HilightW"
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	//ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	//Variable PeakRow=V_Value
	Variable PeakRow=str2num(SLP_MGFit_DataListW[DataRow][4])
	
	String DataW_FName=DataLocation+DataName
	String BgW_FName=DataW_FName+"_BG"
	String Data_nBGW_FName=DataW_FName+"_nBG"
	Wave DataW=$DataW_FName
	Wave Data_nBGW=$Data_nBGW_FName
	
	ListBox ListBox_PeakParam ListWave= $CoefGuessDispW_FName, SelWave=$CoefGuessDispSelW_FName, SelRow=str2num(SLP_MGFit_DataListW[DataRow][4])
	
	SLP_MGFit_ConstraintW2Listbox(DataName)
	
	String WavesToBeDisplayed=""
	String DisplayedWaves_NameList=""
	String TraceList=""
	String TraceName=""
	
	Variable i=0
	Variable j=0
	String CoefW_FName=""
	String Index_str=""
	String ComponentW_FName=""
	String SelPeak_Name=""
	
	//FORMAT THE GRAPH and TRACE
	//Clear drawings
	setdrawlayer /W=SLP_MultiGLAFit_01#G0 UserFront
	drawaction /W=SLP_MultiGLAFit_01#G0  delete
	DoUpdate
	
	Variable FitDisplay_Flg=str2num(SLP_MGFit_DataListW[DataRow][17])
	If (FitDisplay_Flg==0) //Display Guess curves
	
		DisplayedWaves_NameList=SLP_MGFit_CreateComponents(DataName)
		
		//Create highlighted peak
		SelPeak_Name=StringFromList(PeakRow+1,DisplayedWaves_NameList,";") //Selected peak name
		If (Exists(SelPeak_Name))
			Duplicate /O $SelPeak_Name,$HilightW_FName /Wave=HilightW
		EndIf
		
		//Display the wave on graph
		WavesToBeDisplayed=HilightW_FName+";"+Data_nBGW_FName+";"+DisplayedWaves_NameList
		SLP_Util_AddnRmTraces("SLP_MultiGLAFit_01#G0",WavesToBeDisplayed,0)

		//Modify the graph and trace colors
		
		TraceList=tracenamelist("SLP_MultiGLAFit_01#G0",";",1)
		TraceName=StringFromList(0,TraceList,";") //Filled BG for selected peak
		ModifyGraph /W=SLP_MultiGLAFit_01#G0  mode($TraceName)=7,hbFill($TraceName)=2,rgb($TraceName)=(65535,49151,49151)
		TraceName=StringFromList(1,TraceList,";") //Data Wave (BG subtracted)
		Modifygraph /W=SLP_MultiGLAFit_01#G0 mode($TraceName)=3, Marker($TraceName)=16, rgb($TraceName)=(43690,43690,43690)
		TraceName=StringFromList(2,TraceList,";") //Guess Wave
		ModifyGraph /W=SLP_MultiGLAFit_01#G0 rgb($TraceName)=(1,34817,52428), lsize($TraceName)=3
		TraceName=StringFromList(PeakRow+3,TraceList,";") //Selected peak
		ModifyGraph /W=SLP_MultiGLAFit_01#G0  rgb($TraceName)=(65535,43690,0),lsize($TraceName)=1.5
	
	Elseif (FitDisplay_Flg==1)	//Display fit results
		
		//Make a list of waves to be displayed
		String FitW_FName=Data_nBGW_FName+"_Fit"
		WavesToBeDisplayed=HilightW_FName+";"+Data_nBGW_FName+";"+FitW_FName+";" //Hilight - Data nBG - Fit
		
		For (i=0;i<dimsize(CoefGuessDispW,0);i+=1)
			If (CoefGuessDispSelW[i][0]==48)
				sprintf Index_str,"%02d",j
				ComponentW_FName=Data_nBGW_FName+"_f"+index_str //Add fit components
				WavesToBeDisplayed+=ComponentW_FName+";"				
				j+=1
			EndIf
		EndFor
		
		//Create highlighted peak
		SelPeak_Name=StringFromList(PeakRow+3,WavesToBeDisplayed,";") //Selected peak name
		If (Exists(SelPeak_Name))
			Duplicate /O $SelPeak_Name,$HilightW_FName /Wave=HilightW
		EndIf
	
		SLP_Util_AddnRmTraces("SLP_MultiGLAFit_01#G0",WavesToBeDisplayed,0)
		
		TraceList=tracenamelist("SLP_MultiGLAFit_01#G0",";",1)
		TraceName=StringFromList(0,TraceList,";") //Filled BG for selected peak
		ModifyGraph /W=SLP_MultiGLAFit_01#G0  mode($TraceName)=7,hbFill($TraceName)=2,rgb($TraceName)=(40000,50000,40000)
		TraceName=StringFromList(1,TraceList,";") //Data Wave (BG subtracted)
		Modifygraph /W=SLP_MultiGLAFit_01#G0 mode($TraceName)=3, Marker($TraceName)=16, rgb($TraceName)=(43690,43690,43690)
		TraceName=StringFromList(2,TraceList,";") //Fit Wave
		ModifyGraph /W=SLP_MultiGLAFit_01#G0 rgb($TraceName)=(0,35000,0), lsize($TraceName)=3
		TraceName=StringFromList(PeakRow+3,TraceList,";") //Selected peak
		ModifyGraph /W=SLP_MultiGLAFit_01#G0  rgb($TraceName)=(65535,43690,0),lsize($TraceName)=1.5
		
	EndIf
	
	ModifyGraph /W=SLP_MultiGLAFit_01#G0 margin(left)=28,margin(bottom)=28, margin(top)=9,margin(right)=9
	Modifygraph /W=SLP_MultiGLAFit_01#G0 mirror=1,minor=1,tick=2
	//Orginal data w (before BG) and BG waves display
	Wavestats /Q Data_nBGW
	Variable OrgData_yOffset=(V_Max-V_Min)*1.10 //Determine offset value from the data y-range
	ControlInfo /W=SLP_MultiGLAFit_01 Check_DisplayOriginal; variable DisplayOrg_Flg=V_Value
	If (DisplayOrg_Flg)
		appendtograph /W=SLP_MultiGLAFit_01#G0 $DataW_FName
		TraceName=StringFromList(ItemsInlist(TraceNameList("SLP_MultiGLAFit_01#G0",";",1))-1,TraceNameList("SLP_MultiGLAFit_01#G0",";",1))
		ModifyGraph /W=SLP_MultiGLAFit_01#G0 offset($TraceName)={0,OrgData_yOffset},rgb($TraceName)=(30000,30000,30000)
	EndIf
	ControlInfo /W=SLP_MultiGLAFit_01 Check_DisplayBG; variable DisplayBg_Flg=V_Value
	If (DisplayBg_Flg)
		appendtograph /W=SLP_MultiGLAFit_01#G0 $BgW_FName
		TraceName=StringFromList(ItemsInlist(TraceNameList("SLP_MultiGLAFit_01#G0",";",1))-1,TraceNameList("SLP_MultiGLAFit_01#G0",";",1))
		ModifyGraph /W=SLP_MultiGLAFit_01#G0 offset($TraceName)={0,OrgData_yOffset}, lstyle($TraceName)=2,rgb($TraceName)=(30000,30000,30000)
	EndIf
	
	//Slider controls
	Variable MinX=dimoffset(DataW,0)
	Variable MaxX=dimoffset(DataW,0)+(dimsize(DataW,0)-1)*dimdelta(DataW,0)
	Variable StepX=dimdelta(DataW,0)
	Slider slider_Pos win=SLP_MultiGLAFit_01,limits={MinX,MaxX,StepX/4}
	WaveStats /Q DataW
	Slider slider_Int win=SLP_MultiGLAFit_01,limits={0,V_Max,V_Max/400}
	Slider slider_Fwhm win=SLP_MultiGLAFit_01,limits={0.01,MaxX-MinX,(MaxX-MinX)/100}
	
	Slider Slider_Int win=SLP_MultiGLAFit_01,value=str2num(CoefGuessDispW[PeakRow][3])
	Slider Slider_Pos win=SLP_MultiGLAFit_01,value=str2num(CoefGuessDispW[PeakRow][4])
	Slider Slider_Fwhm win=SLP_MultiGLAFit_01,value=str2num(CoefGuessDispW[PeakRow][5])
	Slider Slider_Mix win=SLP_MultiGLAFit_01,value=str2num(CoefGuessDispW[PeakRow][6])
	Slider Slider_As win=SLP_MultiGLAFit_01,value=str2num(CoefGuessDispW[PeakRow][7])
	
	//Popup
	Variable BG_Sel=whichlistitem(SLP_MGFit_DataListW[DataRow][5],"None;Shirley;Erf;atan;Flat;Slope")+1
	PopupMenu popup_BgSel win=SLP_MultiGLAFit_01,mode=BG_Sel
	
	SLP_MGFit_ConstraintLogic(DataName)
	
	NVAR Gss_ChiSq=root:Package_SLP:MGFit:Gss_ChiSq
	NVAR Fit_ChiSq=root:Package_SLP:MGFit:Fit_ChiSq
	
	Gss_ChiSq=str2num(SLP_MGFit_DataListW[DataRow][15])
	Fit_ChiSq=str2num(SLP_MGFit_DataListW[DataRow][16])
	
	//Checkbox
	CheckBox check_DispFit win=SLP_MultiGLAFit_01,value=str2num(SLP_MGFit_DataListW[DataRow][17])
	
	If (!Stringmatch(SLP_MGFit_DataListW[DataRow][21],"1"))
		CheckBox check_DispFit win=SLP_MultiGLAFit_01,disable=2
	Else
		CheckBox check_DispFit win=SLP_MultiGLAFit_01,disable=0
	Endif
	
	NVAR LowX=root:Package_SLP:MGFit:LowX
	NVAR HighX=root:Package_SLP:MGFit:HighX
	LowX=str2num(SLP_MGFit_DataListW[DataRow][18])
	HighX=str2num(SLP_MGFit_DataListW[DataRow][19])
	
	SLP_MGFit_ReadAreaUnderCurve(DataName)
	
	String PAreaW_FName=Data_nBGW_FName+"_PArea" //peak area from fitting (only selected peak(s))
	If (Exists(PAreaW_FName))
		SLP_MGFit_ReadAreaUnderPeaks(DataName)
	EndIf
	SLP_MGFit_CalculateARatio(DataName)
	
	//Display Kn to Constraind and Hold ListBox
	SLP_MGFit_AddKn2Listbox()
	
//	If (CoefGuessDispSelW[PeakRow][0][0]==32)
//		SLP_MGFit_ConstraintDisplayW[][4]=""
//	Else
//		j=0
//		For (i=0;i<PeakRow;i+=1)
//			If (CoefGuessDispSelW[i][0][0]==48)
//				j+=1
//			EndIf
//		EndFor
//		//Now j is the number of selected peak
//		SLP_MGFit_ConstraintDisplayW[0][4]="K"+num2str(5*j+0)
//		SLP_MGFit_ConstraintDisplayW[1][4]="K"+num2str(5*j+1)
//		SLP_MGFit_ConstraintDisplayW[2][4]="K"+num2str(5*j+2)
//		SLP_MGFit_ConstraintDisplayW[3][4]="K"+num2str(5*j+3)
//		SLP_MGFit_ConstraintDisplayW[4][4]="K"+num2str(5*j+4)
//	EndIf
	
	//Extra constraints
	SVAR ExtraConstraints=root:Package_SLP:MGFit:ExtraConstraints
	ExtraConstraints=SLP_MGFit_DataListW[DataRow][20]
	
End

Function SLP_MGFit_AddKn2Listbox()
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	
	variable i=0,j=0
	If (CoefGuessDispSelW[PeakRow][0][0]==32) //If the peak is unselected
		SLP_MGFit_ConstraintDisplayW[][4]="" //Show nothing
	Else	//Calculate the K numbers
		j=0
		For (i=0;i<PeakRow;i+=1)
			If (CoefGuessDispSelW[i][0][0]==48)
				j+=1
			EndIf
		EndFor
		//Now j is the number of selected peak. [WARNING] each peak has 5 param.
		SLP_MGFit_ConstraintDisplayW[0][4]="K"+num2str(5*j+0)
		SLP_MGFit_ConstraintDisplayW[1][4]="K"+num2str(5*j+1)
		SLP_MGFit_ConstraintDisplayW[2][4]="K"+num2str(5*j+2)
		SLP_MGFit_ConstraintDisplayW[3][4]="K"+num2str(5*j+3)
		SLP_MGFit_ConstraintDisplayW[4][4]="K"+num2str(5*j+4)
	EndIf
End

Function SetVarProc_ExtraConstraints(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			SLP_MGFit_DataListW[DataRow][20]=sval
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_MGFit_Listbox2ConstraintW(DataName) //Copy user's inputs in Listbox to ConstraintW volume of the fitting
	String DataName
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	String CoefGuessM_FName=DataLocation+"CoefGuessM"
	String ConstraintW_FName=DataLocation+"ConstraintW"
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	Wave SLP_MGFit_ConstraintDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	//DoUpdate
	ConstraintW[][0][PeakRow]=str2num(SLP_MGFit_ConstraintDisplayW[p][1])
	ConstraintW[][1][PeakRow]=str2num(SLP_MGFit_ConstraintDisplayW[p][2])
	ConstraintW[][2][PeakRow]=(SLP_MGFit_ConstraintDisplaySelW[p][3][0]==48)
	//edit ConstraintW
	//DoUpdate
	SLP_MGFit_ConstrW2ConstrV(DataName)
End

Function CheckProc_MGFit_DisplayOrgBG(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			SLP_MGFit_DisplaySelectedData(DataName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SliderProc_MGFit_CoefAdjust(sa) : SliderControl
	STRUCT WMSliderAction &sa

	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				
				ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
				Variable DataRow=V_Value
				ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
				Variable PeakRow=V_Value
				ControlInfo /W=SLP_MultiGLAFit_01 check_DispFit
				Variable FitResultChecked=V_Value
				
				Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
				String DataLocation=SLP_MGFit_DataListW[DataRow][1]
				String DataName=SLP_MGFit_DataListW[DataRow][0]
				
				If (FitResultChecked)
					SLP_MGFit_DataListW[DataRow][17]="0"
					SLP_MGFit_DisplaySelectedData(DataName)
					DoUpdate
				EndIf
				
				String DataW_FName=DataLocation+DataName
				String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
				Wave /T CoefGuessDispW=$CoefGuessDispW_FName
				String GssCurveW_FName=DataW_FName+"_Gss"
				Wave GssCurveW=$GssCurveW_FName
				
				ControlInfo /W=SLP_MultiGLAFit_01 Slider_Int
				Variable Int=V_Value
				ControlInfo /W=SLP_MultiGLAFit_01 Slider_Pos
				Variable Pos=V_Value
				ControlInfo /W=SLP_MultiGLAFit_01 Slider_Fwhm
				Variable Fwhm=V_Value
				ControlInfo /W=SLP_MultiGLAFit_01 Slider_Mix
				Variable Mix=V_Value
				ControlInfo /W=SLP_MultiGLAFit_01 Slider_AS
				Variable As=V_Value
				
				CoefGuessDispW[Peakrow][3]=num2str(Int)
				CoefGuessDispW[Peakrow][4]=num2str(Pos)
				CoefGuessDispW[Peakrow][5]=num2str(Fwhm)
				CoefGuessDispW[Peakrow][6]=num2str(Mix)
				CoefGuessDispW[Peakrow][7]=num2str(As)
				
				SLP_MGFit_UpdatePeakComponent()
				
				SLP_MGFit_ConstraintLogic1p(DataName,PeakRow)	
				
				SLP_MGFit_ReadAreaUnder1GssPeak(DataName,PeakRow)
				
				SLP_MGFit_CalculateARatio(DataName)
			endif
			break
	endswitch

	return 0
End

Function ButtonProc_FineStepValues(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			NVAR FineIntStep=root:Package_SLP:MGFit:FineIntStep
			NVAR FinePosStep=root:Package_SLP:MGFit:FinePosStep
			NVAR FineFwhmStep=root:Package_SLP:MGFit:FineFwhmStep
			NVAR FineMixStep=root:Package_SLP:MGFit:FineMixStep
			NVAR FineAsStep=root:Package_SLP:MGFit:FineAsStep
			
			//For some reasons, cannot use Prompt with global variables...
			Variable IntStep=FineIntStep
			Variable PosStep=FinePosStep
			Variable FwhmStep=FineFWHMStep
			Variable MixStep=FineMixStep
			Variable AsStep=FineAsStep
			
			Prompt IntStep,"Intensity"
			Prompt PosStep,"Position"
			Prompt FwhmStep,"FWHM"
			Prompt MixStep,"Mixture"
			Prompt AsStep,"Asymmetry"
			Doprompt "Enter fine step for..",IntStep,PosStep,FwhmStep,MixStep,AsStep
			
			FineIntStep=IntStep
			FinePosStep=PosStep
			FineFwhmStep=FWHMStep
			FineMixStep=MixStep
			FineAsStep=AsStep
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_FineAdjust(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			NVAR FineIntStep=root:Package_SLP:MGFit:FineIntStep
			NVAR FinePosStep=root:Package_SLP:MGFit:FinePosStep
			NVAR FineFwhmStep=root:Package_SLP:MGFit:FineFwhmStep
			NVAR FineMixStep=root:Package_SLP:MGFit:FineMixStep
			NVAR FineAsStep=root:Package_SLP:MGFit:FineAsStep
			
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			Variable PeakRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			
			strswitch (ba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "button_FineIntInc":
					CoefGuessDispW[PeakRow][3]=num2str(str2num(CoefGuessDispW[PeakRow][3])+FineIntStep)
					break
				case "button_FineIntDec":
					CoefGuessDispW[PeakRow][3]=num2str(str2num(CoefGuessDispW[PeakRow][3])-FineIntStep)
					break
				case "button_FinePosInc":
					CoefGuessDispW[PeakRow][4]=num2str(str2num(CoefGuessDispW[PeakRow][4])+FinePosStep)
					break
				case "button_FinePosDec":
					CoefGuessDispW[PeakRow][4]=num2str(str2num(CoefGuessDispW[PeakRow][4])-FinePosStep)
					break
				case "button_FineFwhmInc":
					CoefGuessDispW[PeakRow][5]=num2str(str2num(CoefGuessDispW[PeakRow][5])+FineFwhmStep)
					break
				case "button_FineFwhmDec":
					CoefGuessDispW[PeakRow][5]=num2str(str2num(CoefGuessDispW[PeakRow][5])-FineFwhmStep)
					break
				case "button_FineMixInc":
					CoefGuessDispW[PeakRow][6]=num2str(str2num(CoefGuessDispW[PeakRow][6])+FineMixStep)
					break
				case "button_FineMixDec":
					CoefGuessDispW[PeakRow][6]=num2str(str2num(CoefGuessDispW[PeakRow][6])-FineMixStep)
					break
				case "button_FineAsInc":
					CoefGuessDispW[PeakRow][7]=num2str(str2num(CoefGuessDispW[PeakRow][7])+FineAsStep)
					break
				case "button_FineAsDec":
					CoefGuessDispW[PeakRow][7]=num2str(str2num(CoefGuessDispW[PeakRow][7])-FineAsStep)
					break
			EndSwitch
			
			SLP_MGFit_DataListW[DataRow][17]="0"
			
			SLP_MGFit_UpdatePeakComponent()
			SLP_MGFit_DisplaySelectedData(DataName) //Need this to change the slider
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_MGFit_UpdatePeakComponent()
	
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	String DataW_FName=DataLocation+DataName
	String DataW_nBG_FName=DataW_FName+"_nBG"
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	String GssCurveW_FName=DataW_FName+"_Gss"
	Wave GssCurveW=$GssCurveW_FName
	
	Variable int=str2num(CoefGuessDispW[Peakrow][3])
	Variable Pos=str2num(CoefGuessDispW[Peakrow][4])
	Variable Fwhm=str2num(CoefGuessDispW[Peakrow][5])
	Variable Mix=str2num(CoefGuessDispW[Peakrow][6])
	Variable As=str2num(CoefGuessDispW[Peakrow][7])
	
	String ComponentW_FName=DataW_FName+"_p"+num2str(PeakRow)
	If (Exists(ComponentW_FName))
		Wave ComponentW=$ComponentW_FName
		GssCurveW-=ComponentW		//Subtract the component from the guess W first
		ComponentW=SLP_Func_GLA(Int,Pos,Fwhm,Mix,As,x)
		GssCurveW+=ComponentW		//Add it back to the Gss W
	EndIf

	NVAR Gss_Chisq=root:Package_SLP:MGFit:Gss_Chisq
	Gss_Chisq=SLP_MGFit_CalcChiSq(GssCurveW_FName,DataW_nBG_FName)
	SLP_MGFit_DataListW[DataRow][15]=num2str(Gss_Chisq)
	
	SLP_MGFit_ReadAreaUnderCurve(DataName)
End

Function SLP_MGFit_DrawVLine(x)
	variable x
	setdrawlayer /W=SLP_MultiGLAFit_01#G0 UserFront
	drawaction /W=SLP_MultiGLAFit_01#G0  delete
	SetDrawEnv /W=SLP_MultiGLAFit_01#G0 xcoord= bottom,ycoord= left,linefgc=(50000,20000,20000 ),dash=2
	GetAxis /W=SLP_MultiGLAFit_01#G0 /Q left
	drawline /W=SLP_MultiGLAFit_01#G0 x,V_min,x,V_max

End

Function SLP_MGFit_ConstraintW2Listbox(DataName) //Copy ConstraintW values to the Constraint ListBox on the panel
	String DataName
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	String CoefGuessM_FName=DataLocation+"CoefGuessM"
	String ConstraintW_FName=DataLocation+"ConstraintW"
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	Wave /T SLP_MGFit_ConstraintDisplayW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplayW
	Wave SLP_MGFit_ConstraintDisplaySelW=root:Package_SLP:MGFit:SLP_MGFit_ConstraintDisplaySelW
	
	SLP_MGFit_ConstraintDisplayW[][1]=num2str(ConstraintW[p][0][PeakRow])
	SLP_MGFit_ConstraintDisplayW[][2]=num2str(ConstraintW[p][1][PeakRow])
	SLP_MGFit_ConstraintDisplaySelW[][3][0]=(ConstraintW[p][2][PeakRow]==1)*16+32 //If true = put 48 (checkbox is checked). If faulse = put 32 (checkbox is unchecked)
	
End

Function ListBoxProc_MGFit_AreaRatio(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			SLP_MGFit_CalculateARatio(DataName)
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function SLP_MGFit_ReadAreaUnderCurve(DataName)
	String DataName
	NVAR LowX=root:Package_SLP:MGFit:LowX
	NVAR HighX=root:Package_SLP:MGFit:HighX
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataW_FName=DataLocation+DataName	//Raw data
	String BgW_FName=DataW_FName+"_BG"		//Background
	String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
	String Data_GssW_FName=DataW_FName+"_Gss"	//Guess curve
	String FitW_FName=Data_nBGW_FName+"_Fit"		//Fit curve
	wave DataW=$DataW_FName
	wave BgW=$BgW_FName
	
	Wave /T SLP_MGFit_CurveAreaW=root:Package_SLP:MGFit:SLP_MGFit_CurveAreaW
	
	SLP_MGFit_CurveAreaW[0][]={{"Data wave area"},{"Data wave after BG subtraction area"},{"Data wave after flat BG subtraction area"},{"Guess curve area"},{"Fit curve area"},{"BG area"},{"BG after flat BG area"}}
	SLP_MGFit_CurveAreaW[1][0]={num2str(area($DataW_FName,LowX,HighX))}
	SLP_MGFit_CurveAreaW[1][1]={num2str(area($Data_nBGW_FName,LowX,HighX))}
	SLP_MGFit_CurveAreaW[1][2]={num2str(area($DataW_FName,LowX,HighX)-(DataW[0]*(HighX-LowX)))}
	SLP_MGFit_CurveAreaW[1][3]={num2str(area($Data_GssW_FName,LowX,HighX))}
	SLP_MGFit_CurveAreaW[1][4]={num2str(area($FitW_FName,LowX,HighX))}
	SLP_MGFit_CurveAreaW[1][5]={num2str(area($BgW_FName,LowX,HighX))}
	SLP_MGFit_CurveAreaW[1][6]={num2str(area($BgW_FName,LowX,HighX)-(BgW[0]*(HighX-LowX)))}
End

Function  SLP_MGFit_CalculateARatio(DataName)
	String DataName
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	Wave /T SLP_MGFit_PeakAreaW=root:Package_SLP:MGFit:SLP_MGFit_PeakAreaW
	Wave /T SLP_MGFit_CurveAreaW=root:Package_SLP:MGFit:SLP_MGFit_CurveAreaW

	Variable PeakCol,PeakRow,CurveCol,CurveRow
	ControlInfo /W=SLP_MultiGLAFit_01 list_PeakArea
	PeakRow=V_Value
	PeakCol=V_selCol
	ControlInfo /W=SLP_MultiGLAFit_01 list_CurveArea
	CurveRow=V_Value
	CurveCol=V_selCol
	
	NVAR AreaRatio=root:Package_SLP:MGFit:AreaRatio
	
	AreaRatio=str2num(SLP_MGFit_PeakAreaW[PeakRow][PeakCol])/str2num(SLP_MGFit_CurveAreaW[CurveRow][CurveCol])
	
End

Function  SLP_MGFit_ReadAreaUnder1GssPeak(DataName,PeakRow)
	String DataName
	Variable PeakRow
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	Wave /T SLP_MGFit_PeakAreaW=root:Package_SLP:MGFit:SLP_MGFit_PeakAreaW
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataW_FName=DataLocation+DataName	//Raw data
	wave DataW=$DataW_FName
	
	String BgW_FName=DataW_FName+"_BG"		//Background
	String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
	
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"

	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	
	duplicate /O  DataW,root:Package_SLP:MGFit:PeakAreaCalW /Wave=PeakAreaCalW
	PeakAreaCalW=0
	
	Variable Int,Pos,Fwhm,Mix,As

	int=str2num(CoefGuessDispW[PeakRow][3])
	Pos=str2num(CoefGuessDispW[PeakRow][4])
	Fwhm=str2num(CoefGuessDispW[PeakRow][5])
	Mix=str2num(CoefGuessDispW[PeakRow][6])
	As=str2num(CoefGuessDispW[PeakRow][7])

	PeakAreaCalW=SLP_Func_GLA(Int,Pos,Fwhm,Mix,As,x)
	SLP_MGFit_PeakAreaW[1][PeakRow]=num2str(area(PeakAreaCalW))
		
	Killwaves PeakAreaCalW
End

Function  SLP_MGFit_ReadAreaUnderPeaks(DataName)
	String DataName
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	Wave /T SLP_MGFit_PeakAreaW=root:Package_SLP:MGFit:SLP_MGFit_PeakAreaW
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataW_FName=DataLocation+DataName	//Raw data
	wave DataW=$DataW_FName
	
	String BgW_FName=DataW_FName+"_BG"		//Background
	String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
	String Data_GssW_FName=DataW_FName+"_Gss"	//Guess curve
	String PAreaW_FName=Data_nBGW_FName+"_PArea" //peak area from fitting (only selected peak(s))
	Wave PAreaW=$PAreaW_FName
	
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	String FitPeakFName=""
	String Index_str=""
	duplicate /O  DataW,root:Package_SLP:MGFit:PeakAreaCalW /Wave=PeakAreaCalW
	PeakAreaCalW=0
	
	Variable Int,Pos,Fwhm,Mix,As
	
	Variable i=0
	Variable j=0
	For (i=0;i<dimsize(CoefGuessDispW,0);i+=1)
		//Guess peaks
		If (CoefGuessDispSelW[i][0]==48)
			int=str2num(CoefGuessDispW[i][3])
			Pos=str2num(CoefGuessDispW[i][4])
			Fwhm=str2num(CoefGuessDispW[i][5])
			Mix=str2num(CoefGuessDispW[i][6])
			As=str2num(CoefGuessDispW[i][7])
		
			PeakAreaCalW=SLP_Func_GLA(Int,Pos,Fwhm,Mix,As,x)
			SLP_MGFit_PeakAreaW[1][i]=num2str(area(PeakAreaCalW))
		ElseIf  (CoefGuessDispSelW[i][0]==32)
			SLP_MGFit_PeakAreaW[1][i]=""
		EndIf
		
		//Fit peaks
		If (CoefGuessDispSelW[i][0]==48)
			sprintf Index_str,"%02d",j
			FitPeakFName=Data_nBGW_FName+"_f"+Index_str
			SLP_MGFit_PeakAreaW[2][i]=num2str(PAreaW[j])
		Elseif (CoefGuessDispSelW[i][0]==32)
			SLP_MGFit_PeakAreaW[2][i]=""
		EndIf
		j+=1
	EndFor
	Killwaves PeakAreaCalW
End

Function /T SLP_MGFit_CreateComponents(DataName)
	String DataName
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	Variable N_Peaks=str2num(SLP_MGFit_DataListW[DataRow][3])
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	String CoefGuessM_FName=DataLocation+"CoefGuessM"
	String ConstraintW_FName=DataLocation+"ConstraintW"
	Wave /T CoefGuessDispW=$CoefGuessDispW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	String ComponentW_FName=""
	String ComponentW_NameList=""
	
	variable i=0
	
	String DataW_FName=DataLocation+DataName
	Wave DataW=$DataW_FName
	
	String GssCurveW_FName=DataW_FName+"_Gss"
	Duplicate /O DataW,$GssCurveW_FName /wave=GssCurveW
	GssCurveW=0
	
	For (i=0;i<dimsize(CoefGuessDispW,0);i+=1)
		If (CoefGuessDispSelW[i][0][0]==48)
			ComponentW_FName=DataW_FName+"_p"+num2str(i)
			Duplicate /O DataW,$ComponentW_FName /wave=ComponentW
			ComponentW=SLP_Func_GLA(str2num(CoefGuessDispW[i][3]),str2num(CoefGuessDispW[i][4]),str2num(CoefGuessDispW[i][5]),str2num(CoefGuessDispW[i][6]),str2num(CoefGuessDispW[i][7]),x)
			ComponentW_NameList+=ComponentW_FName+";"
			GssCurveW+=ComponentW
		Endif
	EndFor
	
	ComponentW_NameList=GssCurveW_FName+";"+ComponentW_NameList
	
	Return ComponentW_NameList
End

Function SLP_MGFit_CalcChiSq(ObsW_FName,ExpW_FName)
	String ObsW_FName,ExpW_FName
	
	Wave ObsW=$ObsW_FName
	Wave ExpW=$ExpW_FName
	Variable ChiSq=0
	
	If (dimoffset(ObsW,0)==dimoffset(ExpW,0) && dimdelta(ObsW,0)==dimdelta(ExpW,0) && dimsize(ObsW,0)==dimsize(ExpW,0))
		Variable i=0
		For (i=0;i<dimsize(ObsW,0);i+=1)
			ChiSq+=(ObsW[i]-ExpW[i])^2
		EndFor
	Else
		print "Aborted. Wave 1 and 2 have different x-scaling"
	EndIf
	Return ChiSq
End

Function ButtonProc_MGFit_Fit(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
			Variable DataRow=V_Value
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			Variable PeakRow=V_Value
			
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			
			String DataName=SLP_MGFit_DataListW[DataRow][0]
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			
			String CoefGuessDispW_FName=DataLocation+"CoefGuessDispW"
			String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
			Wave /T CoefGuessDispW=$CoefGuessDispW_FName
			Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName

			String CoefGuessM_FName=DataLocation+"CoefGuessM" //Use for fitting
			String ConstraintV_FName=DataLocation+"ConstraintV" //Use for fitting
		
			String DataW_FName=DataLocation+DataName	//Raw data
			String BgW_FName=DataW_FName+"_BG"		//Background
			String Data_nBGW_FName=DataW_FName+"_nBG"	//Data after BG subtraction
			String Data_GssW_FName=DataW_FName+"_Gss"	//Guess curve
			String FitW_FName=Data_nBGW_FName+"_Fit"
			
			Wave Data_nBGW=$Data_nBGW_FName
			
			//Copy data to Constraint Volume and Coef Matrix
			SLP_MGFit_ConstrW2ConstrV(DataName)
			SLP_MGFit_ListBox2CoefMatrix(DataName)
			
			//	!!!! FIT !!!!
			SVAR ExtraConstraints=root:Package_SLP:MGFit:ExtraConstraints
			If (Stringmatch(ExtraConstraints,""))
				SLP_Util_FitMultiGLAs2(Data_nBGW_FName,dimsize($ConstraintV_FName,2),CoefGuessM_FName,ConstraintV_FName)
			Else
				SLP_Util_FitMultiGLAs2(Data_nBGW_FName,dimsize($ConstraintV_FName,2),CoefGuessM_FName,ConstraintV_FName,ExtraConstraintTxt=ExtraConstraints)
			EndIf
			
			Wave FitW=$FitW_FName
			
			//DISPLAY RESULTS
			SLP_MGFit_DataListW[DataRow][17]="1" //== show fit result on the graph
			SLP_MGFit_DisplaySelectedData(DataName)
			
			//Update param guess table (result part)
			Variable i=0
			Variable j=0
			NVAR MaxN_peaks=root:Package_SLP:MGFit:MaxN_peaks
			String CoefW_FName=""
			String Index_str=""
			For (i=0;i<MaxN_peaks;i+=1)
				If (CoefGuessDispSelW[i][0]==48)
					sprintf Index_str,"%02d",j
					CoefW_FName=Data_nBGW_FName+"_c"+Index_str
					wave CoefW=$CoefW_FName
					
					CoefGuessDispW[i][8]=num2str(CoefW[0])
					CoefGuessDispW[i][9]=num2str(CoefW[1])
					CoefGuessDispW[i][10]=num2str(CoefW[2])
					CoefGuessDispW[i][11]=num2str(CoefW[3])
					CoefGuessDispW[i][12]=num2str(CoefW[4])
					
					j+=1
				EndIf
			EndFor
			
			//Calculate Chi Sq.
			NVAR Fit_ChiSq=root:Package_SLP:MGFit:Fit_ChiSq
			Fit_ChiSq= SLP_MGFit_CalcChiSq(FitW_FName,Data_nBGW_FName)
			SLP_MGFit_DataListW[DataRow][16]=num2str(Fit_ChiSq)
			
			//Read area under fitted peaks
			SLP_MGFit_ReadAreaUnderPeaks(DataName)
			
			//Fit data flag
			SLP_MGFit_DataListW[DataRow][21]="1"
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_Util_FitMultiGLAs2(DataW_FName,N_Peaks,CoefGuessM_FName,ConstraintW_FName[,ExtraConstraintTxt])
	String DataW_FName
	Variable N_Peaks
	String CoefGuessM_FName
	String ConstraintW_FName
	String ExtraConstraintTxt //e.g. "K1>K2;K3=0.5*K4;" ..
	
	Wave DataW=$DataW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	String ComponentW_FName=""
	String Constraint_txt=""
	String HoldStr=""
	String PAreaW_FName=DataW_FName+"_PArea"
	String FitW_FName=DataW_FName+"_Fit"
	Duplicate /O DataW,$FitW_FName /Wave=FitW
	FitW=0
	
	Make /O/N=(N_peaks) $PAreaW_FName /WAVE=PAreaW
	
//	Make /O/N=(N_peaks,5) GLA_coef_M
//	GLA_coef_M=0
	
	Make /T/O/N=0 FitConstraintW
	
	Variable i=0
	Variable j=0
	Variable k=0
	Variable m=0
	String CoefList=""
	String CoefW_FName=""
	String Index_str=""
	//String Fit_str="FuncFit /Q/W=2/NTHR=0/TBOX=768 {"
	//String Fit_str="FuncFit /Q/W=2/NTHR=0 {"
	
	//Create a string for Funcfit execution..
	String Fit_str="FuncFit /Q/ODR=0/W=1/NTHR=0 {"
	
	String CoefW_RefName=""
	String CoefW_Ref_List=""
	
	For (i=0;i<N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		CoefW_FName=DataW_FName+"_c"+Index_str
		Make /O/N=5 $CoefW_FName /Wave=CoefW
		CoefW[]=CoefGuessM[i][p]
		Print "Coef guess for peak "+Index_Str
		Print CoefW
		
		//Hold String
		HoldStr=num2str(ConstraintW[0][2][i])+num2str(ConstraintW[1][2][i])+num2str(ConstraintW[2][2][i])+num2str(ConstraintW[3][2][i])+num2str(ConstraintW[4][2][i])
		
		//Create a shorter coef wave name in Current folder (the string lenght limit is 400 characters for Execute command).
		CoefW_RefName="CR"+Index_str
		Duplicate /O $CoefW_FName,$CoefW_RefName //Save to current folder to save the string length [WARNING]
		CoefW_Ref_List+=CoefW_RefName+";" //List of waves to be removed later..
		
		Fit_str+="{SLP_FitFunc_GLA,"+CoefW_RefName+",HOLD=\""+HoldStr+"\"},"
				
		//Constraints
		For (j=0;j<5;j+=1) //Parameters: Int,Pos,FWHM,Mix,As
			If (!Numtype(ConstraintW[j][0][i]) && !(ConstraintW[j][2][i])) //If HOLD, don't put constraint!
				Constraint_txt="K"+num2str(k)+">="+num2str(ConstraintW[j][0][i])
				redimension /N=(dimsize(FitConstraintW,0)+1,dimsize(FitConstraintW,1)) FitConstraintW
				FitConstraintW[m]=Constraint_txt
				m+=1
			EndIf
			If (!Numtype(ConstraintW[j][1][i]) && !(ConstraintW[j][2][i])) //If HOLD, don't put constraint!
				Constraint_txt="K"+num2str(k)+"<="+num2str(ConstraintW[j][1][i])
				redimension /N=(dimsize(FitConstraintW,0)+1,dimsize(FitConstraintW,1)) FitConstraintW
				FitConstraintW[m]=Constraint_txt
				m+=1
			EndIf
			k+=1
		EndFor
		
	EndFor
	
	//Extra constraint text
	If (!ParamIsDefault(ExtraConstraintTxt)) //If ExtraConstraintTxt is used
		Variable N_ExtraConstraints=itemsinlist(ExtraConstraintTxt,";")
		i=0
		For (i=0;i<N_ExtraConstraints;i+=1)
			redimension /N=(dimsize(FitConstraintW,0)+1,dimsize(FitConstraintW,1)) FitConstraintW
			FitConstraintW[dimsize(FitConstraintW,0)-1]=stringfromlist(i,ExtraConstraintTxt,";")
		EndFor
	EndIF
	
	//Finish the Fit String
	Fit_str=RemoveEnding(Fit_str)
	String DestW_FName=DataW_FName+"_Fit"
	Fit_str+="} "+DataW_FName+" /D"+" /C=FitConstraintW"
	
	/////FIT!!!/////
	//Execute funcfit
	//Print Fit_str
	Execute Fit_str
	
	For (i=0;i<itemsinlist(CoefW_Ref_List,";");i+=1)
		sprintf Index_str,"%02d",i
		CoefW_FName=DataW_FName+"_c"+Index_str
		Wave CoefW=$CoefW_FName
		CoefW_RefName=StringFromlist(i,CoefW_Ref_List)
		Wave CoefW_Ref=$CoefW_RefName
		CoefW=CoefW_Ref
		Killwaves $CoefW_RefName
	EndFor
	
	//Create results (components and fit)
	For (i=0;i<N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		CoefW_FName=DataW_FName+"_c"+Index_str
		wave CoefW=$CoefW_FName
		ComponentW_FName=DataW_FName+"_f"+index_str
		duplicate /O DataW,$ComponentW_FName /Wave=ComponentW
		
		ComponentW=SLP_Func_GLA(CoefW[0],CoefW[1],CoefW[2],CoefW[3],CoefW[4],x)
		
		FitW+=ComponentW
		
		//Individual peak area
		PAreaW[i]=area(ComponentW)
	EndFor
End


Function SLP_Util_FindCutoff(DataW_FName,Display_Flg)
	//made to use for CuAl WF measurement project..
	String DataW_FName
	Variable Display_Flg
	
	String CurrentFolder=GetDataFolder(1)
	If (!DataFolderExists("root:Package_SLP:"))
		NewDataFolder root:Package_SLP
	EndIf
	If (!DataFolderExists("root:Package_SLP:Util:"))
		NewDataFolder root:Package_SLP:Util
	EndIf
	If (!DataFolderExists("root:Package_SLP:Util:FindCutOff:"))
		NewDataFolder root:Package_SLP:Util:FindCutOff
	EndIf
	SetDataFolder root:Package_SLP:Util:FindCutOff
	
	Wave DataW=$DataW_FName
	String DataW_Name=StringFromList(itemsinlist(DataW_FName,":")-1,DataW_FName,":")
	String MaskW_Name=DataW_Name+"_MaskW"
	String StraightL_Name=DataW_Name+"_StraightL"
	String ErfW_Name=DataW_Name+"_ErfW"
	
	
	Duplicate /O DataW,$MaskW_Name /Wave=MaskW
	Duplicate /O DataW,$ErfW_Name /Wave=ErfW
	Duplicate /O DataW,$StraightL_Name /Wave=StraightL
	MaskW=0
	StraightL=0
	ErfW=0
	
	//Find peak
	WaveStats /Q DataW
	Variable MaxInt_x=V_maxloc
	Variable MaxInt=V_max
	MaskW=0;MaskW=1*(x<=MaxInt_x)
	
	//Fit with ERF
	Make/D/N=5/O W_coef
	Variable FlatBG=DataW[0]
	Variable StepHeight=MaxInt-DataW[0]
	Variable StepWidth=1
	Variable StepPos=MaxInt_x-StepWidth
	Variable Decay=0 //(Don't fit this one -> hold)
	W_coef[0] = {FlatBG,StepHeight,StepPos,StepWidth,Decay}
	FuncFit /H="00001"/NTHR=0/Q SLP_FuncFit_StohrERF W_coef  DataW /D=ErfW /M=MaskW
	
	Variable Fit_FlatBG=W_coef[0]
	Variable Fit_StepHeight=W_coef[1]
	Variable Fit_StepPos=W_coef[2]
	Variable Fit_StepWidth=W_coef[3]
	
	//From ERF - determine 'linear' region and
	//Fit with line
	Variable FitWidth=0.8 //fraction from ERF Width to fit the straightline
	Variable MinX=Fit_StepPos-Fit_StepWidth*FitWidth/2
	Variable MaxX=Fit_StepPos+Fit_StepWidth*FitWidth/2
	MaskW=0;MaskW=1*(x>=MinX&&x<=MaxX)
	Make /O/N=2 LineCoef
	LineCoef=0
	CurveFit /NTHR=0/Q line  kwCWave=LineCoef DataW /D=StraightL /M=MaskW
	
	//Put NaN to unused data points for straight line and erf
	variable i=0
	variable xPos=0
	For (i=0;i<dimsize(StraightL,0);i+=1)
		xPos=dimoffset(StraightL,0)+dimdelta(StraightL,0)*i
		If (xPos<=MinX||xPos>=MaxX)
			StraightL[i]=NaN
		EndIf
		If (xPos>=MaxInt_x)
			ErfW[i]=NaN
		EndIf
	EndFor
	
	//Print out results
	Variable Intersect_X=(DataW[0]-LineCoef[0])/LineCoef[1]
	String Result_txt="ERF pos = "+num2str(Fit_StepPos)+"\r"+"ERF width = "+num2str(Fit_StepWidth)+"\r"+"x intersect = "+num2str(Intersect_X)
	Print Result_txt+"\r"
	
	//Show result
	If (Display_Flg)
		Display DataW
		Appendtograph ErfW
		modifygraph rgb($ErfW_Name)=(50000,50000,50000)
		Appendtograph /R=right MaskW
		modifygraph rgb($MaskW_Name)=(20000,20000,20000),lstyle($MaskW_Name)=2
		Appendtograph StraightL
		modifygraph rgb($StraightL_Name)=(0,0,65535),lsize($StraightL_Name)=2
		legend
		modifygraph mirror(bottom)=1,minor=1,tick=2
		TextBox /A=RB/C/N=text1 Result_txt
	EndIf
	
	SetDataFolder $CurrentFolder
End
Function SLP_FuncFit_StohrERF(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = FlatBG
	//CurveFitDialog/ w[1] = StepHeight
	//CurveFitDialog/ w[2] = StepPos
	//CurveFitDialog/ w[3] = Width
	//CurveFitDialog/ w[4] = Decay

	return SLP_Func_StohrERF(w[0],w[1],w[2],w[3],w[4],x)
End

Function SLP_FuncFit_OBJSTV(w,stv) : FitFunc
	Wave w
	Variable stv

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(stv) = C0+C1*stv^C2
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ stv
	//CurveFitDialog/ Coefficients 3
	//CurveFitDialog/ w[0] = C0
	//CurveFitDialog/ w[1] = C1
	//CurveFitDialog/ w[2] = C2

	return w[0]+w[1]*stv^w[2]
End

Function SLP_MGFit_ConstrW2ConstrV(DataName)
	String DataName
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	Variable DataRow=SLP_MGFit_FindDataRow(DataName)
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	
	Variable N_peak=str2num(SLP_MGFit_DataListW[DataRow][3])
	
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String ConstraintW_FName=DataLocation+"ConstraintW"
	String ConstraintV_FName=DataLocation+"ConstraintV"
	String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
	
	Wave ConstraintW=$ConstraintW_FName
	Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
	
	Make /O/N=(5,3,0) $ConstraintV_FName /Wave=ConstraintV
	
	variable i=0
	variable j=0
	
	For (i=0;i<dimsize(CoefGuessDispSelW,0);i+=1)
		If (CoefGuessDispSelW[i][0][0]==48)
			redimension /N=(dimsize(ConstraintV,0),dimsize(ConstraintV,1),dimsize(ConstraintV,2)+1) ConstraintV
			ConstraintV[][][j]=ConstraintW[p][q][i]
			j+=1
		EndIf
	EndFor
End

Function SLP_MGFit_FindDataRow(DataName)
	String DataName
	
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	FindValue /TEXT=DataName /TXOP=6 SLP_MGFit_DataListW
	variable col=floor(V_value/dimsize(SLP_MGFit_DataListW,0))
	variable DataRow=V_value-col*dimsize(SLP_MGFit_DataListW,0) 
	
	Return DataRow
End

Function ListBoxProc_MGFit_CoefGuess(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	String DataName
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	DataName=SLP_MGFit_DataListW[DataRow][0]
	Variable PeakRow=0
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
			PeakRow=V_Value
			SLP_MGFit_DataListW[DataRow][4]=num2str(PeakRow)
			SLP_MGFit_DisplaySelectedData(DataName)
			break
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_MGFit_DataListW[DataRow][17]="0"
			SLP_MGFit_DisplaySelectedData(DataName)
			SLP_MGFit_UpdatePeakComponent()
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			String DataLocation=SLP_MGFit_DataListW[DataRow][1]
			String CoefGuessDispSelW_FName=DataLocation+"CoefGuessDispSelW"
			Wave CoefGuessDispSelW=$CoefGuessDispSelW_FName
			If (CoefGuessDispSelW[Row][0][0]==48)//If 'select'
				SLP_MGFit_DataListW[DataRow][4]=num2str(Row) //Change to this row (don't change if 'deselect')
			EndIf
			SLP_MGFit_DataListW[DataRow][17]="0" //change to Guess if Fit is on the graph
			SLP_MGFit_DisplaySelectedData(DataName)
			SLP_MGFit_UpdatePeakComponent()
			break
	endswitch

	return 0
End

Function ListBoxProc_MGFit_Constraints(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_PeakParam
	Variable PeakRow=V_Value
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			break
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_MGFit_Listbox2ConstraintW(DataName)
			//SLP_MGFit_ConstrW2ConstrV(DataName)
			SLP_MGFit_ConstraintLogic1p(DataName,PeakRow)
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			SLP_MGFit_Listbox2ConstraintW(DataName)
			//SLP_MGFit_ConstrW2ConstrV(DataName)
			SLP_MGFit_ConstraintLogic1p(DataName,PeakRow)
			break
	endswitch

	return 0
End

Function ListBoxProc_MGFit_DataSelect(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	NVAR GDataRow=root:Package_SLP:MGFit:GDataRow
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
			If (row!=-1&&row<dimsize(SLP_MGFit_DataListW,0))
				DataName=SLP_MGFit_DataListW[row][0]
				SLP_MGFit_DisplaySelectedData(DataName)
			EndIf
			GDataRow=row
			
			break
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End



Function SLP_MGFit_Panel_BGAdj() : Panel
	DoWindow /K MGFit_BGAdjust
	
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(471,157,894,468) /N=MGFit_BGAdjust
	
	ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
	Variable DataRow=V_Value
	Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
	String DataName=SLP_MGFit_DataListW[DataRow][0]
	String DataLocation=SLP_MGFit_DataListW[DataRow][1]
	String DataW_FName=DataLocation+DataName
	Wave DataW=$DataW_FName
	
	Variable MinX=dimoffset(DataW,0)
	Variable MaxX=dimoffset(DataW,0)+dimdelta(DataW,0)*(dimsize(DataW,0)-1)
	Variable StepX=(MaxX-MinX)/100
	
	WaveStats /Q DataW
	Variable MinY=V_Min-(V_Max-V_Min)/2
	Variable MaxY=V_Max+(V_Max-V_Min)/2
	Variable STepY=(MaxY-MinY)/100
	
	Variable FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX	
	//Starting values
	FlatBG=str2num(SLP_MGFit_DataListW[DataRow][6])
	StepPos=str2num(SLP_MGFit_DataListW[DataRow][7])
	StepHeight=str2num(SLP_MGFit_DataListW[DataRow][8])
	Width=str2num(SLP_MGFit_DataListW[DataRow][9])
	Atten=str2num(SLP_MGFit_DataListW[DataRow][10])
	StartX=str2num(SLP_MGFit_DataListW[DataRow][11])
	EndX=str2num(SLP_MGFit_DataListW[DataRow][12])
	
	String BGType=SLP_MGFit_DataListW[DataRow][5]
	make /O/N=9 MGFit_BGAdj_SliderDisableW
	If (Stringmatch(BGType,"Erf")||Stringmatch(BGType,"atan"))
		MGFit_BGAdj_SliderDisableW={0,0,0,0,0,2,2}
	ElseIf (Stringmatch (BGType,"Slope")||Stringmatch(BGType,"Shirley"))
		MGFit_BGAdj_SliderDisableW={2,2,2,2,2,0,0}
	ElseIf (Stringmatch (BGType,"Flat"))
		MGFit_BGAdj_SliderDisableW={0,2,2,2,2,2,2}
	ElseIf (Stringmatch (BGType,"None"))
		MGFit_BGAdj_SliderDisableW={2,2,2,2,2,2,2}
	EndIF
	
	Slider slider_BGAdj_FlatBG,pos={98,7},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_FlatBG,limits={MinY,MaxY,StepY},value=FlatBG,vert= 0,disable=MGFit_BGAdj_SliderDisableW[0]
	
	Slider slider_BGAdj_StepPos,pos={98,47},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_StepPos,limits={MinX,MaxX,StepX},value=StepPos,vert= 0,disable=MGFit_BGAdj_SliderDisableW[1]
	
	Slider slider_BGAdj_StepHeight,pos={98,87},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_StepHeight,limits={MinY,MaxY,StepY},value=StepHeight,vert= 0,disable=MGFit_BGAdj_SliderDisableW[2]
	
	Slider slider_BGAdj_StepWidth,pos={98,126},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_StepWidth,limits={0.01,(MaxX-MinX)/2,(MaxX-MinX)/200},value=Width,vert= 0,disable=MGFit_BGAdj_SliderDisableW[3]
	
	Slider slider_BGAdj_Atten,pos={98,163},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_Atten,limits={-0.01,0.01,0},value=Atten,vert= 0,disable=MGFit_BGAdj_SliderDisableW[4]

	Slider slider_BGAdj_StartX,pos={98,202},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_StartX,limits={MinX,MaxX,StepX},value=StartX,vert= 0,disable=MGFit_BGAdj_SliderDisableW[5]
	
	Slider slider_BGAdj_EndX,pos={98,242},size={300,41},fSize=8,proc=SliderProc_MGFit_BGAdj,ticks=10
	Slider slider_BGAdj_EndX,limits={MinX,MaxX,StepX},value=EndX,vert= 0,disable=MGFit_BGAdj_SliderDisableW[6]
	
	Killwaves MGFit_BGAdj_SliderDisableW
	
	
	Button button_BGAdj_Done,pos={348,284},size={50,20},title="Done",fSize=10,proc=ButtonProc_MGFit_BGAdj_Done

	//LABEL
	SetDrawLayer UserBack
	SetDrawEnv fsize= 10
	DrawText 17,23,"Flat background"
	SetDrawEnv fsize= 10
	DrawText 49,59,"Step pos"
	SetDrawEnv fsize= 10
	DrawText 38,98,"Step height"
	SetDrawEnv fsize= 10
	DrawText 40,138,"Step width"
	SetDrawEnv fsize= 10
	DrawText 37,177,"Attenuation"
	SetDrawEnv fsize= 10
	DrawText 59,215,"Start X"
	SetDrawEnv fsize= 10
	DrawText 66,255,"End X"

End

Function ButtonProc_MGFit_BGAdj(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_MGFit_Panel_BGAdj()
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_MGFit_BGAdj_Done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow /K MGFit_BGAdjust
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SliderProc_MGFit_BGAdj(sa) : SliderControl
	STRUCT WMSliderAction &sa

	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				
				ControlInfo /W=SLP_MultiGLAFit_01 ListBox_DataList
				Variable DataRow=V_Value
				Wave /T SLP_MGFit_DataListW=root:Package_SLP:MGFit:SLP_MGFit_DataListW
				String DataName=SLP_MGFit_DataListW[DataRow][0]
				String BG_type=SLP_MGFit_DataListW[DataRow][5]
				
				
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_FlatBG
				Variable FlatBG=V_Value
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_StepPos
				Variable StepPos=V_Value
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_StepHeight
				Variable StepHeight=V_Value
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_StepWidth
				Variable Width=V_Value
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_Atten
				Variable Atten=V_Value
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_StartX
				Variable StartX=V_Value
				ControlInfo /W=MGFit_BGAdjust slider_BGAdj_EndX
				Variable EndX=V_Value
				
				SLP_MGFit_MakeBG(DataName,BG_type,FlatBG,StepPos,StepHeight,Width,Atten,StartX,EndX)
				
				SLP_MGFit_DataListW[DataRow][6]=num2str(FlatBG)
				SLP_MGFit_DataListW[DataRow][7]=num2str(StepPos)
				SLP_MGFit_DataListW[DataRow][8]=num2str(StepHeight)
				SLP_MGFit_DataListW[DataRow][9]=num2str(Width)
				SLP_MGFit_DataListW[DataRow][10]=num2str(Atten)
				SLP_MGFit_DataListW[DataRow][11]=num2str(StartX)
				SLP_MGFit_DataListW[DataRow][12]=num2str(EndX)
				
			endif
			break
	endswitch

	return 0
End

/////////////////////////////////////
/////////////CODE START HERE/////////
/////////////////////////////////////



Function SLP_Load_oldLEEM_Img()
	//Load old .DAT file from Elmitec LEEM (before 2014)
	//Positions (in bytes) for image size and image data (can be found from U-View manual)
	variable ImWidth_Location=40
	variable ImHeight_Location=42
	variable ImageData_Location=392
	variable ce_RefNum
	
	String fileFilters = "Data Files (*.dat):.dat;"
	
	Open /R /F=fileFilters ce_RefNum
	
	String ce_FileName=S_fileName
	
	ce_FileName=stringfromlist(itemsinlist(S_fileName,":")-1,S_fileName,":")
	ce_FileName=stringfromlist(0,ce_FileName,".")
	
	variable ce_ImWidth=0
	variable ce_ImHeight=0
	
	fsetpos ce_RefNum,ImWidth_Location
	fbinread /F=2 ce_RefNum, ce_ImWidth
	
	fsetpos ce_RefNum,ImHeight_Location
	fbinread /F=2 ce_RefNum, ce_ImHeight
	
	string ImgW_Name=ce_FileName
	Prompt ImgW_Name, "Image wave name:"
	DoPrompt "Enter",ImgW_Name
	
	make /O /N=(ce_ImWidth,ce_ImHeight) $ImgW_Name /WAVE=ImgW
	
	fsetpos ce_RefNum,ImageData_Location
	fbinread /F=2 ce_RefNum,ImgW
	
	Close ce_RefNum
	
	NewImage ImgW
End

Function SLP_LL_DataSetSelect(DataSet_Row)
	variable DataSet_Row
	
	string SelectedDataSetName
	
	//Plot the new image and select the new dataset
	//NVAR N_Datasets=root:Package_SLP:LoadLEEM:N_Datasets
	SVAR CurrentDataset=root:Package_SLP:LoadLEEM:CurrentDataset
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	NVAR DataSet_Sel=root:Package_SLP:LoadLEEM:DataSet_Sel
	
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	string DataSetName=SLP_ImgSetListW[DataSet_Row][1]
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+DataSetName
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"

	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave SLP_ImgParamListSelW=$ImgParamSel_Fname
	
	string LLSel_Recall_Fname=Pkg_Location+":LoadLEEM_Sel_Recall"
	NVAR LoadLEEM_Sel_Recall=$LLSel_Recall_Fname
	
	//Make selection for List0 (Image list)
	ListBox list0,listwave= SLP_ImgParamListW,selRow=LoadLEEM_Sel_Recall,Row=LoadLEEM_Sel_Recall,selWave=SLP_ImgParamListSelW
	LoadLEEM_Sel=LoadLEEM_Sel_Recall
	
	//Make selection for List1 (Dataset list)
	ListBox list1,selRow=DataSet_Row
	CurrentDataset=SLP_ImgSetListW[DataSet_Row][1]
	Dataset_Sel=DataSet_Row
	
	//Plot the image (the first one in the new dataset)
	SLP_LL_PlotImage(SLP_ImgListW[LoadLEEM_Sel_Recall][3],SLP_ImgListW[LoadLEEM_Sel_Recall][2])
	
End



Function SLP_LL_DelDataSetBatch()
	//Modified 20170226 by CE
	WAVE /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	WAVE SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	variable i=0
	string DataSetName=""
	string DeleteList=""
	variable Del_error=0
	string Error_txt=""
	
	For (i=0;i<dimsize(SLP_ImgSetListW,0)&&Del_error==0;i+=1)
		if (SLP_ImgSetListSelW[i][0]==48) //If the check box is checked
			
			//Deleting the dataset [CODE:SLP_LL_DelDataSet]
			DataSetName=SLP_ImgSetListW[i][1]
			Del_error=SLP_LL_DelDataSet(DataSetName)
			i-=1 //Go back one row
			
			//Add the index of the dataset to be deleted in the DataSet list
			If (Del_error!=0) //If imageset folder cannot be deleted, generate an error message
				Error_txt="Error deleting dataset: "+DataSetName+"\r Images in the dataset are being used somewhere in the current project"
				DoAlert 0,Error_txt
			EndIf
		Endif
	Endfor
	
End

Function SLP_LL_DelDataSet(DataSetName)
	string DataSetName 
	// - DataSet name as the input parameter and not the row position
	// - Delete data folder, and modify the ListW in Pkg folder
	// - The function returen Error_Flg
	//Modified 20170226 by CE
	
	WAVE /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	WAVE SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	NVAR N_datasets=root:Package_SLP:LoadLEEM:N_datasets
	
	FindValue /TEXT=DataSetName /TXOP=6 SLP_ImgSetListW
	variable col=floor(V_value/dimsize(SLP_ImgSetListW,0))
	variable row=V_value-col*dimsize(SLP_ImgSetListW,0)
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+DataSetName
	
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	wave /T ImgListW=$ImgList_Fname
	string Img_Location=ImgListW[0][2]
	
	killDataFolder /Z $Img_Location
	variable DeleteImgError_Flg=V_Flag
	if (DeleteImgError_Flg==0) 
		//Only delete package folder if Image folder can be deleted
		killDataFolder /Z $Pkg_Location
		//Remove the row from SLP_ImgSetListW
		DeletePoints row,1, SLP_ImgSetListW
		DeletePoints row,1, SLP_ImgSetListSelW
		//Update the number of DataSets
		N_datasets-=1
	Endif
	Return DeleteImgError_Flg
End

Function SLP_LL_CreatePvTProfile(Plot_Flg)
	Variable Plot_Flg

	//Find ParamListW and make wave Ref.
	//ControlInfo /W=SLP_LL_01 list1
	NVAR DataSel=root:Package_SLP:LoadLEEM:Dataset_Sel
	Wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	String DataName=SLP_ImgSetListW[DataSel][1]
	String DataPackageFolder="root:Package_SLP:LoadLEEM:"+DataName+":"
	Wave /T ImgListW=$(DataPackageFolder+"SLP_ImgListW")
	Wave /T ImgParamListW=$(DataPackageFolder+"SLP_ImgParamListW")
	Variable SecTime=0
	Make /O/N=(dimsize(ImgParamListW,0)) $(DataPackageFolder+DataName+"_T") /Wave=TempW
	Make /O/N=(dimsize(ImgParamListW,0)) $(DataPackageFolder+DataName+"_P") /Wave=PressureW
	Make /O/U/I/N=(dimsize(ImgParamListW,0)) $(DataPackageFolder+DataName+"_time") /Wave=timeW
	SetScale d, 0, 0, "dat", timeW
	//[NOTE] Only unsigned Integer Wave (I32 UNSIGNED) works for time (in sec.). The unit of its values must be "dat"
	Variable i=0
	For (i=0;i<dimsize(ImgParamListW,0);i+=1)
		TempW[i]=str2num(ImgParamListW[i][4])
		PressureW[i]=str2num(ImgParamListW[i][10])
		sscanf ImgListW[i][6], "%f", SecTime
		//printf "%f", SecTime
		timeW[i]=SecTime
	EndFor
	
	If (Plot_Flg)
		Display TempW vs timeW
		Appendtograph /R=right PressureW vs timeW
		ModifyGraph rgb($(StringFromList(ItemsInList(TraceNameList("",";",1),":"),TraceNameList("",";",1))))=(19675,39321,1)
	EndIf
End

Function ListBoxProc_LL_DatasetList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR Dataset_sel=root:Package_SLP:LoadLEEM:Dataset_sel
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	string Sel_Recall_Name="root:Package_SLP:LoadLEEM:"+CurrentDataSet+":LoadLEEM_Sel_Recall"
	NVAR LoadLEEM_Sel_Recall=$Sel_Recall_Name
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	LoadLEEM_Sel_Recall=LoadLEEM_Sel
	
	if (row!=-1&&row<dimsize(SLP_ImgSetListW,0)) //Prevent users from clicking outside the SLP_ImgSetListW's range
	
		switch( lba.eventCode )
			case -1: // control being killed
				break
			case 4: // mouse down
				
				CurrentDataSet=SLP_ImgSetListW[row][1]
				Dataset_Sel=row
	
				string ImageParamListW_FName="root:Package_SLP:LoadLEEM:"+CurrentDataSet+":SLP_ImgParamListW"
				string ImageListW_FName="root:Package_SLP:LoadLEEM:"+CurrentDataSet+":SLP_ImgListW"
				
				Sel_Recall_Name="root:Package_SLP:LoadLEEM:"+CurrentDataSet+":LoadLEEM_Sel_Recall"
				NVAR LoadLEEM_Sel_Recall=$Sel_Recall_Name
				LoadLEEM_Sel=LoadLEEM_Sel_Recall
				
				wave /T SLP_ImgParamListW=$ImageParamListW_FName
				wave /T SLP_ImgListW=$ImageListW_FName
				
//				Wave TempW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_T")
//				Wave PressureW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_P")
//				Wave timeW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_time")
//				SLP_Util_RemoveAllTraces("SLP_LL_01#SLP_LL_01_PvT")
//				Appendtograph /W=SLP_LL_01#SLP_LL_01_PvT TempW vs timeW
//				Modifygraph /W=SLP_LL_01#SLP_LL_01_PvT mode=4,fStyle(bottom)=1,minor(bottom)=1,msize=1,marker=19,mrkStrokeRGB=(52428,1,1)
//				Appendtograph /W=SLP_LL_01#SLP_LL_01_PvT /R=right PressureW vs timeW
//				ModifyGraph /W=SLP_LL_01#SLP_LL_01_PvT rgb($(StringFromList(ItemsInList(TraceNameList("",";",1),":"),TraceNameList("",";",1))))=(19675,39321,1)
//				Label /W=SLP_LL_01#SLP_LL_01_PvT bottom "Time"
//				Label /W=SLP_LL_01#SLP_LL_01_PvT left "Temp. (C)"
//				Label /W=SLP_LL_01#SLP_LL_01_PvT right "Pressure (mB)"
//				ShowInfo/W=SLP_LL_01
//				Cursor /W=SLP_LL_01#SLP_LL_01_PvT A $(CurrentDataSet+"_T") LoadLEEM_Sel
				SLP_LL_PlotPvT()
				
				ListBox list0,listWave=SLP_ImgParamListW,selRow=LoadLEEM_Sel,Row=LoadLEEM_Sel
				
				string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
				string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
				wave SLP_ImgParamListSelW=$ImgParamSel_Fname
				ListBox list0, selWave=SLP_ImgParamListSelW
				
				SLP_LL_PlotImage(SLP_ImgListW[LoadLEEM_Sel][3],SLP_ImgListW[LoadLEEM_Sel][2])
				
				break
				
			case 3: // double click
				break
			//case 4: // cell selection
			case 5: // cell selection plus shift key
				break
			case 6: // begin edit
				break
			case 7: // finish edit
				break
			case 13: // checkbox clicked (Igor 6.2 or later)
				break
		endswitch
	else
		Listbox List1, SelRow=Dataset_Sel
	endif
	
	return 0
End

Function SLP_LL_CreatePanel01()
	//MODIFIED: 29.12.2020 
	//			- Changed the selection mode of images from 2 (single row selection) to 9 (multiple row selection with shift/command+click enabled)
	//			- Added Check and Uncheck Selected images buttons.
	
	//Check whether initiallization is needed
	If (!DataFolderExists("root:Package_SLP:LoadLEEM" ))
		SLP_LoadLEEM_init()
		slp_Stitch_Init()
		SLP_Util_Init()
	Endif
	
	wave /T SLP_ImgParamColDescrptn=root:Package_SLP:LoadLEEM:SLP_ImgParamColDescrptn
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	NVAR LL_InitFlg=root:Package_SLP:LoadLEEM:LL_InitFlg
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	NVAR ce_X=root:Package_SLP:LoadLEEM:ce_X
	NVAR ce_Y=root:Package_SLP:LoadLEEM:ce_Y
	NVAR ce_SampleTemp=root:Package_SLP:LoadLEEM:ce_SampleTemp
	SVAR ce_FOV1=root:Package_SLP:LoadLEEM:ce_FOV1
	SVAR ce_Notes=root:Package_SLP:LoadLEEM:ce_Notes
	SVAR ce_Date=root:Package_SLP:LoadLEEM:ce_Date
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet

	DoWindow/K SLP_LL_01
	NewPanel /W=(200,90,1150,600) /N=SLP_LL_01
	
	//GROUP1: IMAGE PLANE
	Display /HOST=SLP_LL_01 /N=SLP_LL_01_ImPlot /W=(20,40,330,270)
	ModifyGraph /W=SLP_LL_01#SLP_LL_01_ImPlot tick=3,noLabel=2
	ModifyGraph /W=SLP_LL_01#SLP_LL_01_ImPlot width=0,height=0
	ModifyGraph /W=SLP_LL_01#SLP_LL_01_ImPlot standoff=0
	//Setaxis /W=SLP_LL_01#SLP_LL_01_ImPlot /A/R left //Reverse axis
	
//	TitleBox SLP_LLP_TitleBox_Main,pos={330,10},size={210,20},title="LEEM/PEEM Image Browser"
//	TitleBox SLP_LLP_TitleBox_Main,fSize=16,frame=0
	
	SetDrawEnv /W=SLP_LL_01 gstart
	SetDrawEnv /W=SLP_LL_01 linethick= 0,linefgc= (11412,26273,41459),rounding= 15,fillfgc= (11412,26273,41459)
	DrawRRect /W=SLP_LL_01 334,5,472,34
	SetDrawEnv /W=SLP_LL_01 linethick= 0,linefgc= (65535,65535,65535)
	DrawRRect /W=SLP_LL_01 337,8,373,31
	SetDrawEnv /W=SLP_LL_01  fsize= 16,fstyle= 1
	DrawText /W=SLP_LL_01 340,30,"SLP"
	SetDrawEnv /W=SLP_LL_01 fsize= 16,fstyle= 1,textrgb= (65535,65535,65535)
	DrawText /W=SLP_LL_01 378,30,"LoadLEEM"
	SetDrawEnv /W=SLP_LL_01 gstop
	
	Setvariable SetVar_notes,pos={20,15},size={300,15},title="Image notes:",value=ce_Notes,proc=SetVarProc_ImgNotes

	//GROUP2: IMAGE PARAM
	Variable G2X=340
	Variable G2Y=37
	
	TitleBox SLP_LLP_TitleBox_02, pos={G2X,G2Y},frame=0,title="Image parameters:"
	SetDrawLayer /W=SLP_LL_01 UserBack
	SetDrawEnv /W=SLP_LL_01 linefgc= (21845,21845,21845),fillpat= 0
	DrawRect G2X-15,G2Y,G2X+160,G2Y+110
	
	Setvariable SetVar_X,pos={G2X,G2Y+20},size={60,16},limits={-inf,inf,0},title="x:",value=ce_X,noedit=1
	Setvariable SetVar_Y,pos={G2X+85,G2Y+20},size={60,16},limits={-inf,inf,0},title="y:",value=ce_Y,noedit=1
	Setvariable SetVar_SampleTemp,pos={G2X,G2Y+40},size={80,16},limits={-inf,inf,0},title="Temp:",value=ce_SampleTemp,noedit=1
	Setvariable SetVar_FOV1,pos={G2X,G2Y+60},size={80,16},title="FOV:",value=ce_FOV1,noedit=1
	Setvariable SetVar_Date,pos={G2X-5,G2Y+80},size={180,15},title=" ",value=root:Package_SLP:LoadLEEM:ce_Date,noedit=1,frame=0
	SetVariable SetVar_Time,pos={G2X-5,G2Y+100},size={148,15},title=" ",value= root:Package_SLP:LoadLEEM:ce_Time,noedit= 1,frame=0
	
	CheckBox check_ShowName,pos={G2X+160,G2Y},size={50,16},proc=CheckProc_LL,title="Name"
	CheckBox check_ShowName,value= 1
	CheckBox check_ShowXY,pos={G2X+160,G2Y+20},size={50,16},proc=CheckProc_LL,title="Position"
	CheckBox check_ShowXY,value= 1
	CheckBox check_ShowTemp,pos={G2X+160,G2Y+40},size={50,16},proc=CheckProc_LL,title="Temp."
	CheckBox check_ShowTemp,value= 1
	CheckBox check_ShowFOV,pos={G2X+160,G2Y+60},size={50,16},proc=CheckProc_LL,title="FOV"
	CheckBox check_ShowFOV,value= 1
	CheckBox check_ShowDate,pos={G2X+160,G2Y+80},size={50,16},proc=CheckProc_LL,title="Date"
	CheckBox check_ShowDate,value= 1
	CheckBox check_ShowTime,pos={G2X+160,G2Y+100},size={50,16},proc=CheckProc_LL,title="Time"
	CheckBox check_ShowTime,value= 1
	
	
	//GROUP3: CONTROL BUTTONs
	Variable G3X=340
	Variable G3Y=180
	
	Button Button_FindScreenPos,pos={G3X,G3Y},size={130,16},Fsize=10,title="Find screen position..",proc=ButtonProc_LL
	Button Button_SetScale,pos={G3X,G3Y+20},size={130,16},Fsize=10,title="Set scale..", proc=ButtonProc_LL
	Button Button_Stitch,pos={G3X,G3Y+40},size={130,16},Fsize=10,title="Stitch images..", proc=ButtonProc_LL
	Button Button_LoadFullSize,pos={G3X,G3Y+60},size={130,16},Fsize=10,title="Load fullsize image", proc=ButtonProc_LL
	Button Button_ExportSelImg,pos={G3X,G3Y+80},size={130,16},Fsize=10,title="Export selected images..",proc=ButtonProc_LL
	Button Button_CreateReport,pos={G3X,G3Y+100},size={130,16},Fsize=10,title="Create report.."
	
	Button Button_ExportSelImg fColor=(32768,54615,65535)
	
	//GROUP4: DATASETLIST
	Variable G4X=570
	Variable G4Y=5
	
	TitleBox SLP_LLP_TitleBox_Main1,pos={G4X,G4Y},size={66,16},title="Dataset list",fSize=12,frame=0
	Button Button_DelDataSet,pos={G4X+230,G4Y},size={130,20}, Fsize=10,title="Delete selected datasets",proc=ButtonProc_LL
	ListBox list1,pos={G4X,G4Y+20},size={360,115},listWave=SLP_ImgSetListW,selWave=SLP_ImgSetListSelW, selrow=Dataset_Sel
	ListBox list1,mode=2, widths={35,125,40,40,120},userColumnResize= 1
	ListBox list1,titleWave=root:Package_SLP:LoadLEEM:SLP_DatasetColDescrptn, proc=ListBoxProc_LL_DatasetList
	
	//GROUP4.1: PvT and POS
	Display /HOST=SLP_LL_01 /N=SLP_LL_01_PvT /W=(630,161,932,293)
	Display /HOST=SLP_LL_01 /N=SLP_LL_01_POS /W=(478,161,620,292)
	AppendImage  /W=SLP_LL_01#SLP_LL_01_POS root:Package_SLP:LoadLEEM:SLP_PosMap
	ModifyGraph /W=SLP_LL_01#SLP_LL_01_POS grid=2
	Cursor /W=SLP_LL_01#SLP_LL_01_POS /I/F A SLP_PosMap 0,0
	DrawText 635,153,"Pressure vs. Temperature"
	CheckBox check_PvT_Temp,pos={773,144},size={74,15},proc=CheckProc_LL,title="Temperature",value= 1
	CheckBox check_PvT_Pressure,pos={854,144},size={55,15},proc=CheckProc_LL,title="Pressure",value= 1

	//GROUP5: IMAGELIST
	Variable G5X=20
	Variable G5Y=280
	
	Button Button_LoadImg,pos={G5X,G5Y},size={115,16},Fsize=10,fColor=(0,17409,26214),title="Browse image..", proc=ButtonProc_LL
	Button Button_SelAll,pos={319.00,481.00},size={80.00,16.00},proc=ButtonProc_LL,title="Select all",fSize=10
	Button Button_SelNone,pos={401.00,481.00},size={80.00,16.00},proc=ButtonProc_LL,title="Select none",fSize=10
	Button Button_ChkSel,pos={482.00,481.00},size={100.00,16.00},proc=ButtonProc_LL,title="Check selected",fSize=10
	Button Button_UnChkSel,pos={583.00,481.00},size={100.00,16.00},proc=ButtonProc_LL,title="Uncheck selected",fSize=10
	Button Button_DeleteImg,pos={685.00,481.00},size={140.00,16.00},proc=ButtonProc_LL,title="Delete checked image(s)",fSize=10,fColor=(65535,0,0)

	
	ListBox List0,pos={G5X,G5Y+20},size={915,175},titleWave=SLP_ImgParamColDescrptn,mode=9,selRow= 0
	ListBox List0,widths={35,110,50,50,50,80,50,50,50,50,70,50,70,250,85,85},userColumnResize= 1, proc=ListBoxProc_LL_ImgList

	TitleBox SLP_LLP_Titlebox_Descriptions, fsize=9, frame=0, pos={G5X,G5Y+200},title="Double click wave name to display image in a separate window"
	Button Button_Done,pos={870,G5Y+200},size={50,16},fsize=10,title="Done", proc=ButtonProc_LL

	//SOME FUNCTIONs
	If (LL_InitFlg==0)
		string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
		string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
		string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
		string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
		wave /T SLP_ImgListW=$ImgList_Fname
		wave /T SLP_ImgParamListW=$ImgParam_Fname
		wave SLP_ImgParamListSelW=$ImgParamSel_Fname
		Wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
		SLP_LL_PlotImage(SLP_ImgListW[LoadLEEM_sel][3],SLP_ImgListW[LoadLEEM_sel][2])
		
		ListBox list0,listWave=SLP_ImgParamListW
		ListBox list0, selWave=SLP_ImgParamListSelW
		ListBox list0,selRow=LoadLEEM_sel
		ListBox list0, selWave=SLP_ImgParamListSelW
		
		SLP_LL_PlotPvT()
	Endif 
End

Function ListBoxProc_LL_ImgList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	string LoadLEEM_Sel_Recall_FName="root:Package_SLP:LoadLEEM:"+CurrentDataSet+":LoadLEEM_Sel_Recall"
	NVAR LoadLEEM_Sel_Recall=$LoadLEEM_Sel_Recall_FName
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	
	
	If (row!=-1&&row<dimsize(SLP_ImgParamListW,0)) //[20201230a] Only allow users to select rows with data
		String ImageName=SLP_ImgListW[row][3]
		String ImageLocation=SLP_ImgListW[row][2]
		
		switch( lba.eventCode )
			case -1: // control being killed
				break
			case 4: // mouse down
				
				LoadLEEM_Sel=row
				LoadLEEM_Sel_Recall=row
				
				SLP_LL_PlotImage(ImageName,ImageLocation)
				Wave TempW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_T")
				Cursor /W=SLP_LL_01#SLP_LL_01_PvT A $(CurrentDataSet+"_T") LoadLEEM_Sel
				Variable PosMapX=str2num(SLP_ImgParamListW[LoadLEEM_Sel][2])
				Variable PosMapY=str2num(SLP_ImgParamListW[LoadLEEM_Sel][3])
				Cursor /W=SLP_LL_01#SLP_LL_01_POS /I/F A SLP_PosMap PosMapX,PosMapY
				break
			case 3: // double click
				LoadLEEM_Sel=row
				LoadLEEM_Sel_Recall=row
				
				SLP_LL_PlotImage(ImageName,ImageLocation)
				SLP_LL_PlotSingleImg()
				break
			//case 4: // cell selection
			case 5: // cell selection plus shift key
				break
			case 6: // begin edit
				break
			case 7: // finish edit
				break
			case 13: // checkbox clicked (Igor 6.2 or later)
				break
		endswitch
	Else
		ListBox List0, SelRow=LoadLEEM_Sel,win=SLP_LL_01
	EndIf
	
	return 0
End

Function /T SLP_LoadLEEM_getParam(ce_StartAddress,ce_EndAddress,ce_Filename)
	//DESCRIPTIONs: extract .dat image parameters and save them into global variables. 
	//					Use brute force method because U-View allow users to save header data in any order.
	//MODIFIED: 18.03.2021 	- Change name from SLP_get_LEEM_Param to SLP_LoadLEEM_getParam
	//								- Return image parameter string
	variable ce_StartAddress //Start of the header bytes (=520 in most cases). This value can be found from SLP_LoadLEEM_LoadImage
	variable ce_EndAddress //Start of the image bytes (=1687 in most cases). This value can be found from SLP_LoadLEEM_LoadImage
	string ce_Filename
	
	//[ADDED: 18.03.2021] - String to contain parameters values. Other functions can use StringByKey to retrieve individual parameters
	String ImageParameters=""
	
	//Parameters to be read
	NVAR ce_OBJ=root:Package_SLP:LoadLEEM:ce_OBJ
	NVAR ce_STV=root:Package_SLP:LoadLEEM:ce_STV
	NVAR ce_SampleTemp=root:Package_SLP:LoadLEEM:ce_SampleTemp
	NVAR ce_X=root:Package_SLP:LoadLEEM:ce_X
	NVAR ce_Y=root:Package_SLP:LoadLEEM:ce_Y
	NVAR ce_Exposure=root:Package_SLP:LoadLEEM:ce_Exposure
	SVAR ce_PressureTag1=root:Package_SLP:LoadLEEM:ce_PressureTag1
	NVAR ce_Pressure1=root:Package_SLP:LoadLEEM:ce_Pressure1
	SVAR ce_PressureTag2=root:Package_SLP:LoadLEEM:ce_PressureTag2
	NVAR ce_Pressure2=root:Package_SLP:LoadLEEM:ce_Pressure2
	SVAR ce_FOV1=root:Package_SLP:LoadLEEM:ce_FOV1
	SVAR ce_FOV2=root:Package_SLP:LoadLEEM:ce_FOV2
	
	variable ce_addr=ce_StartAddress
	variable ce_file
	string ce_Path
	//newpath ce_Path, "Macintosh HD:Users:ChananEuaruksakul:Dropbox:SLRI:20160823b:test_CE_cu110_000006.dat"
	open /R ce_file as ce_filename
	
	fsetpos ce_file,ce_addr
	
	string ce_loadString
	string ce_unit_code
	string ce_unit
	variable ce_loadChar
	variable ce_loadInt
	variable ce_loadFloat
	string ce_loadFloatStr
	
	string ce_ElementName
	
	variable i=0
	Variable j=0
	Do
		fbinread /F=1 ce_file, ce_loadInt //Read the ID (1 byte)
		
		//Change from signed to unsigned Integer
		//(UView uses this to separated 'displayed' and 'no displayed' parameters on screen
		If (ce_loadInt<0)
			ce_loadInt+=128 
		endif
		
		//print "ID:"+num2str(ce_loadInt)
		
		//BRUTE FORCE BEGINs
		if ((ce_loadInt>=0)&&(ce_loadInt<=99)) //The first 100 ID's are for parameters in LEEM2000
			
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //move the pointer over the Parameter Name string and unit string
			Fstatus ce_file
			
			If (ce_LoadInt==11)
				//Read OBJ
				fbinread /F=4 ce_file,ce_loadFloat
				ce_OBJ=ce_loadFloat
			
			elseif (ce_LoadInt==38)
				//Read STV
				//fbinread /F=2 ce_file,ce_loadChar
				fbinread /F=4 ce_file,ce_loadFloat
				ce_STV=ce_loadFloat
			
			elseif (ce_LoadInt==39)
				//Read Sample Temp.
				//fbinread /F=2 ce_file,ce_loadChar
				fbinread /F=4 ce_file,ce_loadFloat
				ce_SampleTemp=ce_loadFloat
			
			Else //Ignor other 0-99 parameters
				ce_addr=V_filePos+4
				fsetpos ce_file,ce_addr
			
			Endif
			
		Elseif (ce_loadInt==100)
			//print "Micrometer X,Y"
			fbinread /F=4 ce_file,ce_loadFloat
			ce_X=ce_loadFloat
			//print ce_loadFloat
			fbinread /F=4 ce_file,ce_loadFloat
			ce_Y=ce_loadFloat
			//print ce_loadFloat
			
		Elseif (ce_loadInt==104) //Camera exposure (don't keep)
			Fstatus ce_file
			ce_addr=V_filePos+6
			fsetpos ce_file,ce_addr
			
		Elseif (ce_loadInt==105) //Title
			Fstatus ce_file
			ce_addr=V_filePos+2
			fsetpos ce_file,ce_addr
		
		Elseif (ce_loadInt==106)
			//READ Pressure1
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //String1
			ce_PressureTag1=ce_loadString
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //String2
			fbinread /F=4 ce_file,ce_loadFloat
			ce_Pressure1=ce_loadFloat
			
		Elseif (ce_loadInt==107)
			//READ Pressure2
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //String1
			ce_PressureTag2=ce_loadString
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //String2
			fbinread /F=4 ce_file,ce_loadFloat
			ce_Pressure2=ce_loadFloat
		
		Elseif (ce_loadInt==110) //110: FOV , camera to FOV cal. factor (string max 16 char's+0+float)
			//print "FOV"
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //not sure about num2char(9)
			ce_FOV1=""
			ce_FOV2=""
			String FOV_Char=""
			j=0
			Do
				FOV_Char=ce_loadString[j]
				ce_FOV1+=FOV_Char
				j+=1
			While (char2num(FOV_Char)!=9&&char2num(FOV_Char)!=0)
			ce_FOV1=RemoveEnding(ce_FOV1)
			ce_FOV1=ConvertTextEncoding(ce_FOV1, 120,1, 1, 0)
			If (char2num(FOV_Char)==9) //If there are two FOV setting (special character (code = 9) is in between)
				Do
					FOV_Char=ce_loadString[j]
					ce_FOV2+=FOV_Char
					j+=1
				While (char2num(FOV_Char)!=0)
			EndIf
			ce_FOV2=RemoveEnding(ce_FOV2)
			ce_FOV2=ConvertTextEncoding(ce_FOV2, 120,1, 1, 0)
			fbinread /F=4 ce_file,ce_loadFloat //Float = camera to FOV calibration (not used in SLPA)
			
		Elseif (ce_loadInt==114) //Mirror state
			Fstatus ce_file
			ce_addr=V_filePos+2
			fsetpos ce_file,ce_addr
			
		Elseif (ce_loadInt==115) //MCP screen
			Fstatus ce_file
			ce_addr=V_filePos+4
			fsetpos ce_file,ce_addr
		
		Elseif (ce_loadInt==116) //MCP channel plate
			Fstatus ce_file
			ce_addr=V_filePos+4
			fsetpos ce_file,ce_addr
			
		Endif
	
		Fstatus ce_file
	While (V_filePos<ce_EndAddress)
	
	//Put the results into Text output
	//STYLE: use (/r) to make carriage return in wave notes and textboxs
	ImageParameters+="OBJ:"+num2str(ce_OBJ)+"\r"
	ImageParameters+="STV:"+num2str(ce_STV)+"\r"
	ImageParameters+="SampleTemp:"+num2str(ce_SampleTemp)+"\r"
	ImageParameters+="X:"+num2str(ce_X)+"\r"
	ImageParameters+="Y:"+num2str(ce_Y)+"\r"
	ImageParameters+="Exposure:"+num2str(ce_Exposure)+"\r"
	//ImageParameters+="PressureTag1:"+(ce_PressureTag1)+"\r" //Pressure tag probably has a special character
	ImageParameters+="Pressure1:"+num2str(ce_Pressure1)+"\r"
	//ImageParameters+="PressureTag2:"+(ce_PressureTag2)+"\r" //Pressure tag probably has a special character
	ImageParameters+="Pressure2:"+num2str(ce_Pressure2)+"\r"
	ImageParameters+="FOV1:"+ce_FOV1+"\r"
	ImageParameters+="FOV2:"+ce_FOV2+"\r"
	
	//STYLE: put it for StringByKey default separators (:) and (;)
//	ImageParameters+="OBJ:"+num2str(ce_OBJ)+";"
//	ImageParameters+="STV:"+num2str(ce_STV)+";"
//	ImageParameters+="SampleTemp:"+num2str(ce_SampleTemp)+";"
//	ImageParameters+="X:"+num2str(ce_X)+";"
//	ImageParameters+="Y:"+num2str(ce_Y)+";"
//	ImageParameters+="Exposure:"+num2str(ce_Exposure)+";"
//	ImageParameters+="PressureTag1:"+(ce_PressureTag1)+";"
//	ImageParameters+="Pressure1:"+num2str(ce_Pressure1)+";"
//	ImageParameters+="PressureTag2:"+(ce_PressureTag2)+";"
//	ImageParameters+="Pressure2:"+num2str(ce_Pressure2)+";"
//	ImageParameters+="FOV1:"+ce_FOV1+";"
//	ImageParameters+="FOV2:"+ce_FOV2+";"

	//NOTE from 'File Format2015.pdf'
	//0..99: 	1. LEEM2000 module # 
	//			2. followed by name
	//			3. followed by 1 ASCII digit identifying the unit unit codes:
	//				0=none,1=V,2=mA,3=A,4=C,5=K,6=mV,7=pA,8=nA,9=uA 
	//			4. 0 to terminate the string
	//			5. data: 1 float (4 Bytes)
	//0xff: skip
	//100: Mitutoyo micrometer readout: 2 floats (x, y coordinate)
	//101: (before 1.3.10) FOV (string max 16 char's + 0)
	//102: (before 1.3.10) varian controller #1 gauge #1 value (float)
	//103: (before 1.3.10) varian controller #1 gauge #2 value (float)
	//104: camera exposure (float) in seconds - mislabeled previously as ms
	//		LEEMdataVersion >1 : 2 bytes B1,B2 follow
	//		If B1>0 average is on , B2= number of averaged images 2 to 127
	//		if B1=0 average is off
	//		if B1<0 sliding average (<0 in this case -1: hex: 0xff, decimal :255)
	//105: title (string max 16 char's + 0)
	//106: varian controller #1 gauge #1 label, units value 
	//		(string max 16 char's+0,+string max 4 char's+0, float) 27
	//107: varian controller #1 gauge #2 label, units value 
	//		(string max 16 char's+0,+string max 4 char's+0, float) 27
	//108: varian controller #2 gauge #1 label, units value 
	//		(string max 16 char's+0,+string max 4 char's+0, float) 27
	//109: varian controller #2 gauge #2 label, units value 
	//		(string max 16 char's+0,+string max 4 char's+0, float) 27
	//110: FOV , camera to FOV cal. factor (string max 16 char's+0+float)
	//111: phi, theta (float,float)
	//112: spin
	//114: Mirror state
	//115: MCP screen voltage in kV
	//116: MCP channelplate voltage in kV
	
	variable ce_print_f=0
	if (ce_print_f==1)
		print "OBJ ="+num2str(ce_OBJ)
		print "STV ="+num2str(ce_STV)
		print "Sample temp. ="+num2str(ce_SampleTemp)
		print "X ="+num2str(ce_X)
		print "Y ="+num2str(ce_Y)
		print "FOV1 ="+ce_FOV1
		print "FOV2 ="+ce_FOV2
		print "Pressure tag 1= "+ce_PressureTag1
		print "Pressure1 ="+num2str(ce_Pressure1)
		print "Pressure tag 2= "+ce_PressureTag2
		print "Pressure2 ="+num2str(ce_Pressure2)
		//print "Exposure ="+num2str(ce_OBJ)
	endif
	
	close ce_file
	Return ImageParameters
End

Function SLP_LoadLEEM_LoadImage(ce_Filename,ce_ImgName)
	//DESCRIPTIONs: Load Elmitec's .dat image
	//MODIFIED: 18.03.2021 - Previously SLP_Load_LEEM_Img() - change function name to SLP_LoadLEEM_LoadImage
	
	string ce_FileName //File name with directory
	string ce_ImgName //Full image name to store image data
	
	NVAR LEEMdata_pointer=root:Package_SLP:LoadLEEM:LEEMdata_pointer
	NVAR LEEMimage_pointer=root:Package_SLP:LoadLEEM:LEEMimage_pointer
	
	variable ce_RefNum
	open /R ce_RefNum as ce_Filename
	//DoUpdate
	
	variable ce_F_Addr
	variable ce_F_value
	
	variable ce_AttachedRecipeSize=0
	variable ce_AttachedMarkupSize=0
	variable ce_LEEMDataSize=0
	
	variable ce_ImWidth=0
	variable ce_ImHeight=0
	variable ce_ImStLocation=0
	
	//Read AttachedRecipeSize
	ce_F_Addr=46
	fsetpos ce_RefNum,ce_F_Addr
	fbinread /F=2 ce_RefNum, ce_F_value
	
	ce_AttachedRecipeSize=ce_F_value
	
	If (ce_AttachedRecipeSize!=0)
		ce_AttachedRecipeSize=128
	Endif
	
	//print "Attached Recipe Size = "+num2str(ce_F_value)
	
	//Read AttachedMarkupSize
	ce_F_Addr=126+ce_AttachedRecipeSize
	fsetpos ce_RefNum,ce_F_Addr
	fbinread /F=2 ce_RefNum, ce_F_value
	
	ce_AttachedMarkupSize=(floor(ce_F_value/128)+1)*128
	//Print "Attached Markup Size = "+num2str(ce_AttachedMarkupSize)
	
	//Read LEEMDataSize
	ce_F_Addr=126+ce_AttachedRecipeSize+4
	fsetpos ce_RefNum,ce_F_Addr
	fbinread /F=2 ce_RefNum, ce_F_value
	
	ce_LEEMDataSize=ce_F_value
	//Print "LEEM Data Size = "+num2str(ce_LEEMDataSize)
	
	//Read Image Width&Height
	ce_F_Addr=40
	fsetpos ce_RefNum,ce_F_Addr
	fbinread /F=2 ce_RefNum, ce_F_value
	
	ce_ImWidth=ce_F_value
	//Print "Image Width = "+num2str(ce_ImWidth)
	fbinread /F=2 ce_RefNum, ce_F_value
	ce_ImHeight=ce_F_value
	//Print "Image Height = "+num2str(ce_ImHeight)
	
	//Load the image
	//Create an image wave with the WxH specified in the .dat header
	Make /O/R/N=(ce_ImWidth,ce_ImHeight) $ce_ImgName /WAVE=Img_Wave
	
	ce_ImStLocation=104+ce_AttachedRecipeSize+288+ce_AttachedMarkupSize+ce_LEEMDataSize
	//Print "Image starts at byte "+num2str(ce_ImStLocation)
	fsetpos ce_RefNum,ce_ImStLocation //Set the pointer to the start of the image data block
	Fbinread /F=2 ce_RefNum,Img_Wave //Read image /F=2 = Signed 16-bit word, 2 bytes. 
	//As ImgWave is a matrix, Igor seems to load the binary and move the pointer automatically to fill each image pixel with the intensity data
	
	//17.08.2020 
	//- For image processing in Igor by default, the y-axis need to be swapped and the first data should be 
	//		at the UPPER-LEFT cornor of the image matrix
	ImageTransform flipCols Img_Wave
	
	LEEMdata_pointer=104+ce_AttachedRecipeSize+288+ce_AttachedMarkupSize
	LEEMimage_pointer=ce_ImStLocation
	
	//ADD Image parameters in data wave's note
	String ImageParameters=SLP_LoadLEEM_getParam(LEEMdata_pointer,LEEMimage_pointer,ce_Filename)
	Note Img_Wave,ImageParameters
	
	Close ce_RefNum
End

Function SLP_LoadLEEM_BGProcess_ImgMonotoring(s)
	//DESCRIPTIONs: monitor a folder and look for a new file. Save the list of files to W_FileList
	//CREATED: 17.03.2021
	STRUCT WMBackgroundStruct &s
	
	SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
	SVAR imgExtension=root:Package_SLP:Util:AutoUpdateFileList:imgExtension
	SLP_Util_FileList(ImgLocation,ImgExtension)
	wave/T W_FileList=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
	SLP_LoadLEEM_ImageBrowse_ListBoxSel(dimsize(W_FileList,0)-1) //Select the last one
	Listbox list0 Win=SLP_LoadImg_Panel_01,SelRow=dimsize(W_FileList,0)-1
	return 0
End

Function SLP_LoadLEEM_BGProcess_MonitorImg_Start()
	//DESCRIPTION: start background process to monitor new .dat image files
	//CREATED: 17.03.2021
	Variable UpdatePeriod=5 //update period in seconds
	Variable numTicks = UpdatePeriod*60 	// Run every 5 seconds (60 ticks)
	CtrlNamedBackground LoadLEEM_BGProcess_MonitorImg, period=numTicks, proc=SLP_LoadLEEM_BGProcess_ImgMonotoring
	CtrlNamedBackground LoadLEEM_BGProcess_MonitorImg, start
End

Function SLP_LoadLEEM_BGProcess_MonitorImg_Stop()
	//DESCRIPTION: stop background process that monitors new .dat image files
	//CREATED: 17.03.2021
	CtrlNamedBackground LoadLEEM_BGProcess_MonitorImg, stop
End



Function CheckProc_LoadLEEM_ImageBrowse(cba) : CheckBoxControl
	//DESCRIPTION: CheckProc for LoadLEEM's imageBrowser 
	//MODIFIED: 18.03.2021
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			strswitch(cba.CtrlName)	// string switch
				case "Preview":
					NVAR ImgLoadPreview=root:Package_SLP:Util:AutoUpdateFileList:ImgLoadPreview
					ImgLoadPreview=checked
					NVAR ImgSel=root:Package_SLP:Util:AutoUpdateFileList:ImgSel
					SLP_LoadLEEM_ImageBrowse_ListBoxSel(ImgSel)
					Break
				case "Monitor_Folder": //[ADDED - 17.03.2021]
					If (checked)
						SLP_LoadLEEM_BGProcess_MonitorImg_Start()
						Print "LoadLEEM image monitoring started"
					Else
						SLP_LoadLEEM_BGProcess_MonitorImg_Stop()
						Print "LoadLEEM image monitoring stopped"
					EndIf
					break
				Case "Details": //[ADDED - 18.03.2021]
					If (checked)
						TextBox /C/N=PreviewTxt/W=SLP_LoadImg_Panel_01#ImgPlot_01/F=0/B=1/A=LB "\\K(65535,65535,65535)\Z10"+Note(root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg)
					Else
						TextBox /K/W=SLP_LoadImg_Panel_01#ImgPlot_01/N=PreviewTxt
					EndIf
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_LoadLEEM_ImageBrowse_ListBoxSel(row)
	//DESCRIPTIONs: Display selected image on Image Browser window of LoadLEEM module
	//CREATED: 17.03.2021
	Variable row
	
	NVAR ImgLoadPreview=root:Package_SLP:Util:AutoUpdateFileList:ImgLoadPreview 
	NVAR ImgSel=root:Package_SLP:Util:AutoUpdateFileList:ImgSel
	ImgSel=row
	SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
	wave/T W_FileList=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
	wave W_FileList_Sel=root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel
	wave M_PreviewedImg=root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg

	String CurrentImageName=stringfromlist(0,ImageNameList("SLP_LoadImg_Panel_01#ImgPlot_01",";"))
	String FileFLocation=ImgLocation+W_FileList[row][0]
	
	SetVariable setvar_ImageDescription, win=SLP_LoadImg_Panel_01, value=_STR:W_FileList[row][0]
	
	If (ImgLoadPreview)
		If (!Stringmatch(CurrentImageName,""))
			removeimage /W=SLP_LoadImg_Panel_01#ImgPlot_01 $CurrentImageName
		Endif
		SLP_LoadLEEM_LoadImage(FileFLocation,"root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg")
		Appendimage /W=SLP_LoadImg_Panel_01#ImgPlot_01 M_PreviewedImg
		ModifyGraph /W=SLP_LoadImg_Panel_01#ImgPlot_01 tick=3,noLabel=2,margin=1
		Setaxis /W=SLP_LoadImg_Panel_01#ImgPlot_01 /A/R left //Reverse y axis for image (17.08.2020)
		ControlInfo /W=SLP_LoadImg_Panel_01 Details
		If (V_Value==1)
			TextBox /C/N=PreviewTxt/W=SLP_LoadImg_Panel_01#ImgPlot_01/F=0/B=1/A=LB "\\K(65535,65535,65535)\Z10"+Note(root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg)
		EndIf
	EndIf

End

Function ButtonProc_LoadLEEM_ImageBrowse(ba) : ButtonControl
	//DESCRIPTIONs: ButtonProc for LoadLEEM's imageBrowser 
	//MODIFIED: 17.03.2021 	- move from individual ButtonProc function to single function with StrSwitch
	//								- added new feature for ImageBrowse v2.0
	STRUCT WMButtonAction &ba
	SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
	SVAR imgExtension=root:Package_SLP:Util:AutoUpdateFileList:imgExtension
	NVAR ImgSel=root:Package_SLP:Util:AutoUpdateFileList:ImgSel
	wave/T W_FileList=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				case "Load_SingleImage":
					String File_FName=ImgLocation+W_FileList[ImgSel][0]
					String Image_FName=RemoveEnding(W_FileList[ImgSel][0],".dat")
					If (!Exists(Image_FName))
						SLP_LoadLEEM_LoadImage(File_FName,Image_FName)
						NewImage $Image_FName
						ControlInfo /W=SLP_LoadImg_Panel_01 Details
						If (V_Value==1)
							TextBox /F=0/B=1/A=LB "\\K(65535,65535,65535)\Z10"+Note($Image_FName)
						EndIf
					Else	
						Doalert 0,Image_FName+" already exists"
					EndIf
					Break
				case "Done":		// execute if case matches expression
					SLP_LoadLEEM_BGProcess_MonitorImg_Stop()
					DoWindow/K SLP_LoadImg_Panel_01
					break
				case "Browse":
					GetFileFolderInfo /D/Q
					If (V_Flag!=-1) //If user didn't click cancel
						SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
						SVAR imgExtension=root:Package_SLP:Util:AutoUpdateFileList:imgExtension
						ImgLocation=S_Path
						SLP_Util_FileList(ImgLocation,ImgExtension)
					EndIf
					break
				case "Load":
					SLP_LL_LoadImg_V2()
					break
				case "Refresh":
					SLP_Util_FileList(ImgLocation,ImgExtension)
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

//Function ButtonProc_LoadImg_Done(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			DoWindow/K SLP_LoadImg_Panel_01
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LoadImg_Load(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			SLP_LL_LoadImg_V2()
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LoadImg_Browse(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			GetFileFolderInfo /D/Q
//			SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
//			SVAR imgExtension=root:Package_SLP:Util:AutoUpdateFileList:imgExtension
//			ImgLocation=S_Path
//			SLP_Util_FileList(ImgLocation,ImgExtension)
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LoadImg_Refresh(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
//			SVAR imgExtension=root:Package_SLP:Util:AutoUpdateFileList:imgExtension
//			SLP_Util_FileList(ImgLocation,ImgExtension)
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End

Function SLP_LL_LoadImg_V2()
	//DESCRIPTIONs: Load image series from Image Browser of LoadLEEM module
	//MODIFIED: 17.03.2021 - Bug fix - exit when user click cancel after clicking Load button
	
	NVAR LL_InitFlg=root:Package_SLP:LoadLEEM:LL_InitFlg
	NVAR LL_Resize=root:Package_SLP:LoadLEEM:LL_Resize
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel


	SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
	wave/T W_FileList=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
	wave W_FileList_Sel=root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel
	wave M_PreviewedImg=root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg
	NVAR ImgSel=root:Package_SLP:Util:AutoUpdateFileList:ImgSel
	
	Wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW

	//Use folder name for the IMAGESET name
	string FolderName=stringfromlist(itemsinlist(ImgLocation,":")-1,ImgLocation,":") 	
	
	variable Resize=LL_Resize
	variable exit_flg=0
	string DataSetName=""
	String CurrentFolder=GetdataFolder(1)
	
	SetDataFolder root:Package_SLP:LoadLEEM
	Do //Loop until user put legal and non-duplicated datasetname
		
		//Suggest a dataset name that is legal and is not duplicated with the existing ones
		DataSetName=FolderName //Use the folder name as default
		DataSetName=CleanupName(DataSetName, 0) //Clean up to make name legal for Igor
		If (CheckName(DataSetName,11)) //**[NOTE]: CheckName only check within the selected data folder.
			DataSetName=UniqueName(DataSetName,11,1)
		EndIf
				
		//Ask user's inputs for DataSetName
		prompt DataSetName,"Dataset name"
		prompt Resize,"Resizing factor"
		doprompt "Enter parameters", DataSetName,Resize
		
		//[ADDED: 17.03.2021]
		If (V_Flag==1) //If user click cancel
			Return 0
		EndIf
		
		//Check whether the entered name is legal and is not duplicated 
		If (!SLP_Util_CheckLegalName(DataSetName)||CheckName(DataSetName,11))
			doalert 1,"Illegal or duplicated dataset name. Do you want to choose new dataset name?"
			if (V_flag==2)
				Return 0
			endif
		Else
			exit_flg=1
		EndIf
	
	While (!exit_flg)
	SetDataFolder $CurrentFolder
	If (exit_flg!=2)
		//START LOADING//
		SLP_LoadLEEM_setup_V3(DataSetName)
		SLP_LoadLEEM_batch_V2(DataSetName,resize)
		
		LL_InitFlg=0 //Init. flag = 0 once the first dataset is loaded
		LL_Resize=Resize //Keep the resize value for next times
		//DoUpdate
		
		//Plot the new image and select the new dataset
		NVAR N_Datasets=root:Package_SLP:LoadLEEM:N_Datasets
		SVAR CurrentDataset=root:Package_SLP:LoadLEEM:CurrentDataset
		NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
		
		string Pkg_Location="root:Package_SLP:LoadLEEM:"+DataSetName
		string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
		string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
		
		wave /T SLP_ImgListW=$ImgList_Fname
		wave /T SLP_ImgParamListW=$ImgParam_Fname
		
		//DoUpdate
		//Make selection for List0 (Image list)
		ListBox list0,win=SLP_LL_01,listwave= SLP_ImgParamListW,selRow=0
		LoadLEEM_Sel=0
		
		//string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
		string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
		wave SLP_ImgParamListSelW=$ImgParamSel_Fname
		ListBox list0,win=SLP_LL_01, selWave=SLP_ImgParamListSelW
		
		//Make selection for List1 (Dataset list)
		ListBox list1,win=SLP_LL_01,selRow=N_Datasets-1
		CurrentDataset=SLP_ImgSetListW[N_Datasets-1][1]
		Dataset_Sel=N_Datasets-1
		//Plot the image (the first one in the new dataset)
		SLP_LL_PlotImage(SLP_ImgListW[0][3],SLP_ImgListW[0][2])
	EndIf
End

Function ListBoxProc_LL_FileList(lba) : ListBoxControl
	//DESCRIPTIONs: ListBoxProc for LoadLEEM's ImageBrowse
	//MODIFIED: 17.03.2021
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			
			break
		case 3: // double click
			break
		case 4: // cell selection
			If (row>=0&&row<dimsize(listWave,0)) //[FIXED: 17.03.2021] - &&row<dimsie(listwave,0)) - prevent usrs from clicking blank row
				SLP_LoadLEEM_ImageBrowse_ListBoxSel(row) //[ADDED: 17.03.2021] New separate function
			Endif
			
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch
	
	return 0
End

Function SLP_LL_CreateLoadImg() : Panel
	//DESCRIPTIONs: Image file browsing panel to load single images or image sets.
	//MODIFIED: 17.03.2021 - LoadLEEM Image Browse ver. 2.0
	
	DoWindow /K SLP_LoadImg_Panel_01
	PauseUpdate; Silent 1		// building window...
	
	SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
	SVAR ImgExtension=root:Package_SLP:Util:AutoUpdateFileList:imgExtension
	NVAR ImgLoadPreview=root:Package_SLP:Util:AutoUpdateFileList:ImgLoadPreview
	
	NewPanel /W=(164,96,747,596) /N=SLP_LoadImg_Panel_01	
	SetDrawLayer UserBack
	DrawText 10,495,"\\Z08Hold 'Shift' key to select multiple images"
	SetDrawEnv gstart
	SetDrawEnv linethick= 0,linefgc= (11412,26273,41459),rounding= 15,fillfgc= (11412,26273,41459)
	DrawRRect 6,6,268,35
	SetDrawEnv linethick= 0,linefgc= (65535,65535,65535)
	DrawRRect 9,9,45,32
	SetDrawEnv fsize= 16,fstyle= 1
	DrawText 12,31,"SLP"
	SetDrawEnv fsize= 16,fstyle= 1,textrgb= (65535,65535,65535)
	DrawText 50,31,"LoadLEEM: image browser"
	SetDrawEnv gstop
	
	SetVariable RawData_Location,pos={9.00,38.00},size={498.00,14.00},title="Data location"
	SetVariable RawData_Location,limits={-inf,inf,0},value= root:Package_SLP:Util:AutoUpdateFileList:ImgLocation
	SetVariable FileType,pos={453.00,57.00},size={120.00,14.00},title="File type"
	SetVariable FileType,limits={-inf,inf,0},value= root:Package_SLP:Util:AutoUpdateFileList:imgExtension
	SetVariable setvar_ImageDescription,pos={277.00,81.00},size={297.00,18.00}
	SetVariable setvar_ImageDescription,fSize=12,fStyle=1
	SetVariable setvar_ImageDescription,value= _STR:"IMAGE"
	
	Button Refresh,pos={8.00,56.00},size={68.00,20.00},proc=ButtonProc_LoadLEEM_ImageBrowse,title="Refresh"
	Button Refresh,fSize=10
	Button Load,pos={84.00,56.00},size={183.00,20.00},proc=ButtonProc_LoadLEEM_ImageBrowse,title="Load image set"
	Button Load,fSize=10,fStyle=0,fColor=(0,17409,26214)
	Button Done,pos={527.00,474.00},size={50.00,20.00},proc=ButtonProc_LoadLEEM_ImageBrowse,title="Done"
	Button Done,fSize=10
	Button Browse,pos={513.00,35.00},size={60.00,20.00},proc=ButtonProc_LoadLEEM_ImageBrowse,title="Browse.."
	Button Browse,fSize=10
	Button Load_SingleImage,pos={464.00,404.00},size={110.00,20.00},proc=ButtonProc_LoadLEEM_ImageBrowse,title="Load single image"
	Button Load_SingleImage,fSize=10,fColor=(0,17409,26214)
	
	ListBox list0,pos={8.00,80.00},size={259.00,398.00},proc=ListBoxProc_LL_FileList,fSize=8
	ListBox list0,listWave=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
	ListBox list0,selWave=root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel
	ListBox list0,mode=9,widths={105,90,90,0,0,0,0,0},userColumnResize= 1
	
	CheckBox Preview,pos={279.00,405.00},size={54.00,16.00},proc=CheckProc_LoadLEEM_ImageBrowse,title="Preview "
	CheckBox Preview,variable=root:Package_SLP:Util:AutoUpdateFileList:ImgLoadPreview

	CheckBox Monitor_Folder,pos={494.00,17.00},size={79.00,16.00},proc=CheckProc_LoadLEEM_ImageBrowse,title="Monitor folder"
	CheckBox Monitor_Folder,value= 0
	CheckBox Details,pos={369.00,405.00},size={50.00,16.00},proc=CheckProc_LoadLEEM_ImageBrowse,title="Details "
	CheckBox Details,value= 1

	Display/W=(277,104,574,399) /HOST=SLP_LoadImg_Panel_01 /N=ImgPlot_01
	//AppendImage /W=SLP_LoadImg_Panel_01#ImgPlot_01 :Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg
//	ModifyImage /W=SLP_LoadImg_Panel_01#ImgPlot_01 M_PreviewedImg ctab= {*,*,Grays,0}
//	ModifyGraph /W=SLP_LoadImg_Panel_01#ImgPlot_01 margin=1,frameStyle=1,tick=3, mirror=0,noLabel=2
//	SetAxis /W=SLP_LoadImg_Panel_01#ImgPlot_01/A/R left
End

Function SLP_LL_PlotSingleImg()
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	String ImgW_FName=SLP_ImgListW[LoadLEEM_Sel][2]+SLP_ImgListW[LoadLEEM_Sel][3]
	
	wave ImgW=$ImgW_FName
	
	String ImgLabel_L1="Image wave name: "+SLP_ImgListW[LoadLEEM_Sel][3]
	String ImgLabel_L2="(x,y): ("+SLP_ImgParamListW[LoadLEEM_Sel][2]+"mm ,"+SLP_ImgParamListW[LoadLEEM_Sel][3]+"mm), FOV: "+SLP_ImgParamListW[LoadLEEM_Sel][5]
	String ImgLabel_L3="Temperature: "+SLP_ImgParamListW[LoadLEEM_Sel][4]+ "°C"
	
	NewImage ImgW
	SetAxis /A/R left //Reverse y axis [(0,0) is at the top left]
	//ModifyGraph margin(bottom)=60
	Legend /A=RB "\Z08"+ImgLabel_L1+"\r"+ImgLabel_L2+"\r"+ImgLabel_L3
	
End

Function SLP_LoadLEEM_setup_V3(DataSetName)
	//Create list of images and save the list in the LoadLEEM package folder. Have to do this before SLP_LoadLEEM_batch()
	String DatasetName //Use DataSetName as folder name (2 folders - data and pacakage)
	
	SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
	//Use Image File Location from SLP_LoadImg_Panel
	NewPath/O SymbImgPath ImgLocation
	
	//Create 2 folders to store data, param
	string CurrentFolder=getdatafolder(1)
	string Data_folder_name=CurrentFolder+DatasetName
	string Pkg_folder_name="root:Package_SLP:LoadLEEM:"+DataSetName
	newdatafolder /O $Data_folder_name
	newdatafolder /O $Pkg_folder_name
	
	//Move to PACKAGE folder
	setdatafolder $Pkg_folder_name
	
	//Create a wave that store raw file locations in the computer (and later to store image wave location in Igor project and the byte locations to load Img param and Img.)
	make /T /O /N=(0,8) SLP_ImgListW=""
	
	NVAR N_images=root:Package_SLP:LoadLEEM:N_images
	wave/T W_FileList=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
	wave W_FileList_Sel=root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel
	
	//Check which files to load. Stored them in the SLP_ImgListW (first 2 columns)
	variable i=0
	N_Images=0
	For (i=0;i<dimsize(W_FileList,0);i+=1)
		If (W_FileList_Sel[i][0]&0x09) //If the image is selected ([20201320a] &0x09 is for checking if Mode 9 is used in the list box)
			redimension /N=(dimsize(SLP_ImgListW,0)+1,dimsize(SLP_ImgListW,1)) SLP_ImgListW
			SLP_ImgListW[dimsize(SLP_ImgListW,0)-1][0]=ImgLocation
			SLP_ImgListW[dimsize(SLP_ImgListW,0)-1][1]=W_FileList[i][0]
			N_Images+=1
		EndIf
	EndFor
	
	//Create a wave to store image parameters + SelWave (for listbox)
	make /T /O /N=(N_Images,16) SLP_ImgParamListW=""
	make /O /N=(N_Images,16) SLP_ImgParamListSelW=0
	SLP_ImgParamListSelW[][0]=32 //Make first column = check boxes
	SLP_ImgParamListSelW[][13]=2
	
	//Create global variables that are stored in the image set folder
	variable /G LoadLEEM_Sel_Recall
	variable /G SetScale_Flg=0
	
	//Go back to the same place
	setdatafolder $CurrentFolder
	
End

Function SLP_LoadLEEM_batch_V2(DataSetName,resize) //If resize =0 -> no resize
	string DataSetName
	variable resize
	
	NVAR LEEMdata_pointer=root:Package_SLP:LoadLEEM:LEEMdata_pointer
	NVAR LEEMimage_pointer=root:Package_SLP:LoadLEEM:LEEMimage_pointer 
	
	NVAR N_datasets=root:Package_SLP:LoadLEEM:N_datasets
	
	NVAR ce_OBJ=root:Package_SLP:LoadLEEM:ce_OBJ
	NVAR ce_STV=root:Package_SLP:LoadLEEM:ce_STV
	NVAR ce_SampleTemp=root:Package_SLP:LoadLEEM:ce_SampleTemp
	NVAR ce_X=root:Package_SLP:LoadLEEM:ce_X
	NVAR ce_Y=root:Package_SLP:LoadLEEM:ce_Y
	NVAR ce_Exposure=root:Package_SLP:LoadLEEM:ce_Exposure
	SVAR ce_PressureTag1=root:Package_SLP:LoadLEEM:ce_PressureTag1
	NVAR ce_Pressure1=root:Package_SLP:LoadLEEM:ce_Pressure1
	SVAR ce_PressureTag2=root:Package_SLP:LoadLEEM:ce_PressureTag2
	NVAR ce_Pressure2=root:Package_SLP:LoadLEEM:ce_Pressure2
	SVAR ce_FOV1=root:Package_SLP:LoadLEEM:ce_FOV1
	SVAR ce_FOV2=root:Package_SLP:LoadLEEM:ce_FOV2
	
	NVAR N_Images=root:Package_SLP:LoadLEEM:N_Images
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+DataSetName
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	//Increase the number of row by 1 and add new image set information
	redimension /N=(dimsize(SLP_ImgSetListW,0)+1,8) SLP_ImgSetListW
	redimension /N=(dimsize(SLP_ImgSetListSelW,0)+1,8) SLP_ImgSetListSelW
	SLP_ImgSetListSelW[dimsize(SLP_ImgSetListSelW,0)-1][0]=32
	SLP_ImgSetListSelW[dimsize(SLP_ImgSetListSelW,0)-1][4]=2
	
	variable i=0
	string Filename=""
	string ImgName=""
	
	string Current_folder=getdatafolder(1)
	newdatafolder /O $DataSetName
	setdatafolder $DataSetName
	string creation_Date
	string creation_Time
	string creation_Text
	variable creation_Sec
	string creation_SecText=""
	
	//SVAR WNameSuggestion=root:Package_SLP:Util:WNameSuggest:WNameSuggestion
	
	For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
		FileName=SLP_ImgListW[i][0]+SLP_ImgListW[i][1]
		ImgName=stringfromlist(0,SLP_ImgListW[i][1],".") //Remove the file extension
		//SLP_Util_WNameSuggest(ImgName,0)
		
		If (Strlen(ImgName)>31) //If image name is too long - Use IMG_XXXXXX (UView automatically use 000000 for number)
			ImgName="IMG_"+ImgName[strlen(ImgName)-6,strlen(ImgName)]
		Else
			ImgName=SLP_Util_WNameSuggest(ImgName,0,31)
		EndIf
		
		SLP_LoadLEEM_LoadImage(Filename,ImgName)
		
		wave ImageW=$ImgName
		
		GetFileFolderInfo /Q FileName
		creation_Date=secs2date(V_modificationDate,1)
		creation_Time=secs2Time(V_modificationDate,1)
		creation_Sec=V_modificationDate
		
		//Resize the image wave to save the RAM
		if (resize!=0)
			SLP_Resize_Img_Overwrite(ImgName,resize)
		endif
		
		//Record image wave's name and location
		SLP_ImgListW[i][2]=Current_folder+DataSetName+":"
		SLP_ImgListW[i][3]=ImgName
		SLP_ImgListW[i][4]=num2str(LEEMdata_pointer)
		SLP_ImgListW[i][5]=num2str(LEEMimage_pointer)
		sprintf creation_SecText,"%d",creation_Sec //to prevent igor to automatically change to engineering format.
		SLP_ImgListW[i][6]=creation_SecText
		
		//Read from LEEM Data block and write down image parameters
		SLP_LoadLEEM_getParam(LEEMdata_pointer,LEEMimage_pointer,Filename)
		SLP_ImgParamListW[i][1]=ImgName
		SLP_ImgParamListW[i][2]=num2str(ce_X)
		SLP_ImgParamListW[i][3]=num2str(ce_Y)
		SLP_ImgParamListW[i][4]=num2str(ce_SampleTemp)
		SLP_ImgParamListW[i][5]=ce_FOV1
		SLP_ImgParamListW[i][6]=ce_FOV2
		SLP_ImgParamListW[i][7]=num2str(ce_STV)
		SLP_ImgParamListW[i][8]=num2str(ce_OBJ)
		SLP_ImgParamListW[i][9]=ce_PressureTag1
		SLP_ImgParamListW[i][10]=num2str(ce_Pressure1)
		SLP_ImgParamListW[i][11]=ce_PressureTag2
		SLP_ImgParamListW[i][12]=num2str(ce_Pressure2)
		//Unused slots for extra parameters
		//SLP_ImgParamListW[i][13]=
		
		SLP_ImgParamListW[i][14]=creation_Date
		SLP_ImgParamListW[i][15]=creation_Time
				
	Endfor
	
	//Record new list name in the Image Set List wave
	SLP_ImgSetListW[N_DataSets][1]=DataSetName
	SLP_ImgSetListW[N_DataSets][2]=num2str(resize)
	SLP_ImgSetListW[N_DataSets][3]=num2str(N_images)
	N_DataSets+=1
	
	setdatafolder $Current_folder
	
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	Dataset_Sel=N_DataSets-1
	ListBox list1,win=SLP_LL_01,Selrow=Dataset_Sel
	SLP_LL_CreatePvTProfile(0)
	SLP_LL_PlotPvT()
	
	//DoUpdate
End

Function SLP_LL_PlotPvT()
	
	ControlInfo /W=SLP_LL_01 check_PvT_Temp
	Variable PvT_T_flg=V_Value
	ControlInfo /W=SLP_LL_01 check_PvT_Pressure
	Variable PvT_P_flg=V_Value
	
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	Wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	String CurrentDataSet=SLP_ImgSetListW[Dataset_Sel][1]
	
	Wave TempW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_T")
	Wave PressureW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_P")
	Wave timeW=$("root:Package_SLP:LoadLEEM:"+CurrentDataSet+":"+CurrentDataSet+"_time")
	SLP_Util_RemoveAllTraces("SLP_LL_01#SLP_LL_01_PvT")
	
	if (PvT_T_flg&&PvT_P_flg)
		Appendtograph /W=SLP_LL_01#SLP_LL_01_PvT TempW vs timeW
		Modifygraph /W=SLP_LL_01#SLP_LL_01_PvT mode=4,fStyle(bottom)=1,minor(bottom)=1,msize=1,marker=19,mrkStrokeRGB=(52428,1,1)
		Appendtograph /W=SLP_LL_01#SLP_LL_01_PvT /R=right PressureW vs timeW
		ModifyGraph /W=SLP_LL_01#SLP_LL_01_PvT rgb($(StringFromList(ItemsInList(TraceNameList("SLP_LL_01#SLP_LL_01_PvT",";",1),";")-1,TraceNameList("SLP_LL_01#SLP_LL_01_PvT",";",1))))=(19675,39321,1)
		ModifyGraph /W=SLP_LL_01#SLP_LL_01_PvT notation(right)=1
		Label /W=SLP_LL_01#SLP_LL_01_PvT left "Temp. (C)"
		Label /W=SLP_LL_01#SLP_LL_01_PvT right "Pressure (mB)"
		Label /W=SLP_LL_01#SLP_LL_01_PvT bottom "Time"
	ElseIf (PvT_P_flg)
		Appendtograph /W=SLP_LL_01#SLP_LL_01_PvT PressureW vs timeW
		ModifyGraph /W=SLP_LL_01#SLP_LL_01_PvT rgb($(StringFromList(ItemsInList(TraceNameList("SLP_LL_01#SLP_LL_01_PvT",";",1),":"),TraceNameList("SLP_LL_01#SLP_LL_01_PvT",";",1))))=(19675,39321,1)
		ModifyGraph notation(left)=1
		Label /W=SLP_LL_01#SLP_LL_01_PvT left "Pressure (mB)"
		Label /W=SLP_LL_01#SLP_LL_01_PvT bottom "Time"
	Elseif (PvT_T_flg)
		Appendtograph /W=SLP_LL_01#SLP_LL_01_PvT TempW vs timeW
		Modifygraph /W=SLP_LL_01#SLP_LL_01_PvT mode=4,fStyle(bottom)=1,minor(bottom)=1,msize=1,marker=19,mrkStrokeRGB=(52428,1,1)
		Label /W=SLP_LL_01#SLP_LL_01_PvT left "Temp. (C)"
		Label /W=SLP_LL_01#SLP_LL_01_PvT bottom "Time"
	Else
		SLP_Util_RemoveAllTraces("SLP_LL_01#SLP_LL_01_PvT")
	EndIf
End

//str2num(stringfromlist(0,Time1,":"))*60+str2num(stringfromlist(1,Time1,":"))*1+str2num(stringfromlist(2,Time1,":"))/60

Function ButtonProc_LL(ba) : ButtonControl
	//MODIFIED: 19.12.2020 - Add CheckSelected and UnCheckSelected functions and update SelAll and SelNone with Bitwise operators (works better!)

	STRUCT WMButtonAction &ba
	
	Wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	Wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW

	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	SVAR CurrentImageName=root:Package_SLP:LoadLEEM:CurrentImageName
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
	String ImgW_FName=""
	If (Exists(ImgParamSel_Fname))
		Wave /T SLP_ImgListW=$(Pkg_Location+":SLP_ImgListW")
		Wave /T SLP_ImgParamListW=$(Pkg_Location+":SLP_ImgParamListW")
		Wave SLP_ImgParamListSelW=$(Pkg_Location+":SLP_ImgParamListSelW")
		Wave P_W=$(Pkg_Location+":"+CurrentDataSet+"_P")
		Wave T_W=$(Pkg_Location+":"+CurrentDataSet+"_T")
		Wave time_W=$(Pkg_Location+":"+CurrentDataSet+"_time")
		//wave SLP_ImgParamListSelW=$ImgParamSel_Fname
	Endif
	
	
	variable i=0
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch with name of the control
				case "Button_FindScreenPos":		// execute if case matches expression
					SLP_Create_FindScreenPanel()
					break
				case "Button_SetScale":
					Create_SetScale_Panel()
					break
				case "Button_Stitch":
					
					string ScreenMaskW_FName=Pkg_Location+":SLP_ScreenMask"
					If (!WaveExists($ScreenMaskW_FName))
						DoAlert 0,"Create screen mask first.."
						SLP_Create_FindScreenPanel()
					Else
						SLP_Create_Stitch_Panel1()
					Endif
					
					break
				case "Button_LoadFullSize":
					SLP_LoadFullSize()
					break
				case "Button_ExportSelImg":
					SLP_LL_ExportSelImg_v2() //[20201230b.ipf] change to v2 so users can put PvT plot in the export.
					break
				case "Button_CreateReport":
					
					break
				case "Button_DelDataSet":
					
					DoAlert 1,"Delete selected dataset(s)?"
					if (V_flag==1)
						//Change dataset selection if the current one is going to be delected
						if (SLP_ImgSetListSelW[Dataset_Sel][0]==48)
							//Find the first non-selected DataSet from the top
							For (i=0;i<dimsize(SLP_ImgSetListSelW,0)&&SLP_ImgSetListSelW[i][0]==48;i+=1)
								DoUpdate
							Endfor
							//i is now the index of the first non-selected DataSet
							
							If (i<dimsize(SLP_ImgSetListSelW,0))
								SLP_LL_DataSetSelect(i)
							Else //All datasets have been selected
								SLP_LoadLEEM_Init()
							Endif
						Endif
						SLP_LL_DelDataSetBatch()
					endif
					
					break
				case "Button_Done":
					DoWindow/K SLP_LL_01
					break
				case "Button_LoadImg":
					SLP_LL_CreateLoadImg()
					break
				case "Button_SelAll":
					//SLP_ImgParamListSelW[][0]=48
					//Use BitWise operation instead
					SLP_ImgParamListSelW[][0]=SLP_ImgParamListSelW[p][0]|0x10
					break
				case "Button_SelNone":
					//SLP_ImgParamListSelW[][0]=32
					//Use BitWise operation instead
					SLP_ImgParamListSelW[][0]=SLP_ImgParamListSelW[p][0]&~0x10
					break
				case "Button_ChkSel":		// execute if case matches expression
					//SLP_NEX_RawDataListSelW[][0]=32+(SLP_NEX_RawDataListSelW[p][0]==33||SLP_NEX_RawDataListSelW[p][0]==49||SLP_NEX_RawDataListSelW[p][0]==48)*16
					For (i=0;i<dimsize(SLP_ImgParamListSelW,0);i+=1)
						If (SLP_ImgParamListSelW[i][0]&0x09) //Check whether Bit 3 (Shift Selected) or Bit 0 (Selected) are '1'
							SLP_ImgParamListSelW[i][0]=SLP_ImgParamListSelW[i][0]|0x10
						EndIf
					EndFor
					break
				case "Button_UnChkSel":		// execute if case matches expression
					//SLP_NEX_RawDataListSelW[][0]=32+(SLP_NEX_RawDataListSelW[p][0]==48)*16
					For (i=0;i<dimsize(SLP_ImgParamListSelW,0);i+=1)
						If (SLP_ImgParamListSelW[i][0]&0x09)
							SLP_ImgParamListSelW[i][0]=SLP_ImgParamListSelW[i][0]&~0x10
						EndIf
					EndFor
					break
				case "Button_DeleteImg":		// execute if case matches expression
					doalert 1,"Delete selected image(s) from the dataset?"
					If (V_flag==1)
						For (i=dimsize(SLP_ImgParamListSelW,0)-1;i>=0;i-=1) //For delete - need to start from bottom!
							If (SLP_ImgParamListSelW[i][0]&0x10)
								//SLP_LL_DeleteSingleImage(i)
								If (Stringmatch(CurrentImageName,SLP_ImgListW[i][3])) //Check whether the image is displayed in LL Panel
									RemoveImage /W=SLP_LL_01#SLP_LL_01_ImPlot $CurrentImageName
								EndIf
								ImgW_FName=SLP_ImgListW[i][2]+SLP_ImgListW[i][3]
								CheckDisplayed /A $ImgW_FName //Check whether the image wave is being used elsewhere in Igor
								If (V_Flag!=0)		
									DoAlert 0,SLP_ImgListW[i][3]+" is being used somewhere. The image wave is not deleted."
								Else
									KillWaves $ImgW_FName
									DeletePoints i,1, SLP_ImgListW
									DeletePoints i,1, SLP_ImgParamListW
									DeletePoints i,1, SLP_ImgParamListSelW
									DeletePoints i,1, P_W
									DeletePoints i,1, T_W
									DeletePoints i,1, time_W
									SLP_ImgSetListW[Dataset_Sel][3]=num2str(str2num(SLP_ImgSetListW[Dataset_Sel][3])-1)
								EndIf
							EndIf
						EndFor
					EndIf
					Break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

//Function SLP_LL_DeleteSingleImage(ImageRow)
//	Variable ImageRow
//	a
//End

//Function ButtonProc_LL_SetScale(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			 Create_SetScale_Panel()
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LL_LoadFullSize(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			 SLP_LoadFullSize()
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LL_ExportSelImg(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			 SLP_LL_ExportSelImg()
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End

//Function ButtonProc_LL_LoadImg(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			
//			//Ask the user to identify a folder on the computer
//			SLP_LL_CreateLoadImg()
//			
//			
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LL_FindScreen(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			
//			SLP_Create_FindScreenPanel()
//			
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//
//
//Function ButtonProc_LL_done(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			DoWindow/K SLP_LL_01
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//
//Function ButtonProc_LL_Stitch(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			
//			SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
//			
//			string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
//			
//			string ScreenMaskW_FName=Pkg_Location+":SLP_ScreenMask"
//			
//			If (!WaveExists($ScreenMaskW_FName))
//				DoAlert 0,"Create screen mask first.."
//				SLP_Create_FindScreenPanel()
//			Else
//				SLP_Create_Stitch_Panel1()
//			Endif
//			
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LL_SelNone(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//	
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
//			string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
//			string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
//			wave SLP_ImgParamListSelW=$ImgParamSel_Fname
//			
//			SLP_ImgParamListSelW[][0]=32
//			
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End
//
//Function ButtonProc_LL_SelAll(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//	
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
//			string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
//			string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
//			wave SLP_ImgParamListSelW=$ImgParamSel_Fname
//			
//			SLP_ImgParamListSelW[][0]=48
//			
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End

//Function ButtonProc_LL_DelDataSet(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			
//			DoAlert 1,"Delete selected dataset(s)?"
//			if (V_flag==1)
//				NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
//				wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
//				
//				//Change dataset selection if the current one is going to be delected
//				if (SLP_ImgSetListSelW[Dataset_Sel][0]==48)
//					//Find the first non-selected DataSet from the top	
//					variable i=0
//					For (i=0;i<dimsize(SLP_ImgSetListSelW,0)&&SLP_ImgSetListSelW[i][0]==48;i+=1)
//						DoUpdate
//					Endfor
//					//i is now the index of the first non-selected DataSet
//					
//					If (i<dimsize(SLP_ImgSetListSelW,0))
//						SLP_LL_DataSetSelect(i)
//					Else //All datasets have been selected
//						SLP_LoadLEEM_Init()
//					Endif
//					
//				Endif
//				SLP_LL_DelDataSetBatch()
//			endif
//			
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End

Function SLP_LoadLEEM_init()
	//DESCRIPTIONs: initialize LoadLEEM module
	//MODIFIED: 17.03.2021 - Bug fix - add global variables for image export (fontsize, temp flag, pressure flag, image format)
	string Current_folder=getdatafolder(1)
	newdatafolder /O root:Package_SLP
	newdatafolder /O root:Package_SLP:LoadLEEM
	
	setdatafolder root:Package_SLP:LoadLEEM
	
	variable /G LoadLEEM_Sel=0
	string /G CurrentImageName=""
	string /G LoadLEEM_ImgLoc=""
	variable /G N_Datasets=0
	variable /G N_Images=0
	variable /G Dataset_Sel=0
	variable /G LEEMdata_pointer=0
	variable /G LEEMimage_pointer=0
	string /G CurrentDataSet=""
	variable /G LL_InitFlg=1
	variable /G LL_resize=0.25
	string /G LL_ImgColour="ctab= {*,*,Grays,0}"
	
	variable /G ce_OBJ
	variable /G ce_STV
	variable /G ce_SampleTemp
	variable /G ce_X
	variable /G ce_Y
	variable /G ce_Exposure
	string /G ce_PressureTag1
	variable /G ce_Pressure1
	string /G ce_PressureTag2
	variable /G ce_Pressure2
	string /G ce_FOV1
	string /G ce_FOV2
	string /G ce_notes
	string /G ce_Date
	string /G ce_Time
	
	//[FIXED: 17.03.2021]
	Variable /G Export_FontSize=12
	String /G Export_Temp_Flg="No"
	String /G Export_Pressure_Flg="No"
	String /G Export_ImageFormat=".jpg"
	
	make /T /O /N=(0,8) SLP_ImgSetListW //To store DataSet
	make /O /N=(0,8) SLP_ImgSetListSelW //SelWave for DataSet (for ListBox)
	make /T /O /N=16 SLP_ImgParamColDescrptn
	SLP_ImgParamColDescrptn={"Select","Wave name", "X(mm)", "Y(mm)", "Temp(C)", "FOV1", "FOV2", "STV(eV)", "OBJ(mA)","Pressure1", "(mB)","Pressure2","(mB)","Notes","Date created","Time"}
	
	make /T /O /N=8 SLP_DatasetColDescrptn
	SLP_DatasetColDescrptn={"Select","Dataset name","Scaling","Images","Note","","",""}
	
	make /O/N=(10,10) SLP_PosMap
	setscale /I x,-2.5,2.5,"mm",SLP_PosMap
	setscale /I y,-2.5,2.5,"mm",SLP_PosMap
	
	setdatafolder $Current_folder
End




Function CheckProc_LL(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			If (stringmatch(cba.CtrlName,"check_PvT_Temp")||stringmatch(cba.CtrlName,"check_PvT_Pressure"))
//				ControlInfo check_PvT_Temp
//				Variable PvT_T_flg=V_Value
//				ControlInfo check_PvT_Pressure
//				Variable PvT_P_flg=V_Value
//				If (PvT_T_flg&&PvT_P_flg)
//					SLP_LL_PlotPvT("PvT")
//				Elseif (PvT_T_flg)
//					SLP_LL_PlotPvT("T")
//				Elseif (PvT_P_flg)
//					SLP_LL_PlotPvT("P")
//				Else	
//					SLP_Util_RemoveAllTraces("SLP_LL_01#SLP_LL_01_PvT")
//				Endif
				SLP_LL_PlotPvT()
			Else
				Variable checked = cba.checked
				NVAR  LoadLEEM_sel=root:Package_SLP:LoadLEEM:LoadLEEM_sel
				SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
				string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
				string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
				wave /T SLP_ImgListW=$ImgList_Fname
				String ImageName=SLP_ImgListW[LoadLEEM_sel][3]
				String ImageLocation=SLP_ImgListW[LoadLEEM_sel][2]
				SLP_LL_PlotImage(ImageName,ImageLocation)
			EndIf
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_LL_PlotImage(ImageName,ImageLocation)
	string ImageName
	string ImageLocation
	
	SVAR CurrentImageName=root:Package_SLP:LoadLEEM:CurrentImageName
	SVAR LL_ImgColour=root:Package_SLP:LoadLEEM:LL_ImgColour
	//SVAR Image_Location=root:Package_SLP:LoadLEEM:LoadLEEM_ImgLoc
	//Check whether the plot is blank
	variable N_images=itemsinlist(ImageNameList("SLP_LL_01#SLP_LL_01_ImPlot",";"))
	
	string FullImageName=ImageLocation+ImageName
	
	string PlotName="SLP_LL_01#SLP_LL_01_ImPlot"
	
	If (N_images!=0) //If the image plot is not empty
		if (!stringmatch(ImageName,CurrentImageName)) //If the same image is already there - don't do anything
			
			//Accquire the colour setting of the previous image
			string prev_ImgInfo=imageinfo(PlotName,CurrentImageName,0)
			string prev_ImgColour=stringfromlist(1,greplist(prev_ImgInfo,"RECREATION",0,";"),":")
			prev_ImgColour=RemoveEnding(prev_ImgColour) //Remove ';' at the end
			LL_ImgColour=prev_ImgColour //Save the image colour settings
			
			Appendimage /W=$PlotName $FullImageName;delayupdate
			Execute "ModifyImage /W="+PlotName+" "+ImageName +" "+ prev_ImgColour + ";Delayupdate"//Need to use Execute command
			//ModifyImage /W=$PlotName $ImageName ctab={45,90,Terrain,0};delayupdate
			
			removeimage /W=$PlotName $CurrentImageName //Remove previous image
			
		Endif
	Else
		Appendimage /W=$PlotName $FullImageName;delayupdate
		Execute "ModifyImage /W="+PlotName+" "+ImageName +" "+ LL_ImgColour + ";Delayupdate"//Need to use Execute command
		//ModifyImage /W=$PlotName $ImageName ctab= {45,90,Terrain,0};delayupdate
	Endif
	
	ModifyGraph /W=$PlotName standoff=0
	ModifyGraph /W=$PlotName fSize=7
	SetAxis /W=$PlotName/A/R left //Reverse y axis for image (17.08.2020) - After .dat load flip the image similar to when Igor loads image files
	ModifyGraph /W=$PlotName minor=1
	
	CurrentImageName=ImageName
	
	//Display the important parameters
	NVAR  LoadLEEM_sel=root:Package_SLP:LoadLEEM:LoadLEEM_sel
	SVAR  CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	string SLP_ImgParamListW_FName="root:Package_SLP:LoadLEEM:"+CurrentDataSet+":SLP_ImgParamListW"
	Wave /T SLP_ImgParamListW=$SLP_ImgParamListW_FName
	NVAR ce_X=root:Package_SLP:LoadLEEM:ce_X
	NVAR ce_Y=root:Package_SLP:LoadLEEM:ce_Y
	NVAR ce_SampleTemp=root:Package_SLP:LoadLEEM:ce_SampleTemp
	SVAR ce_FOV1=root:Package_SLP:LoadLEEM:ce_FOV1
	SVAR ce_notes=root:Package_SLP:LoadLEEM:ce_notes
	SVAR ce_Date=root:Package_SLP:LoadLEEM:ce_Date
	SVAR ce_Time=root:Package_SLP:LoadLEEM:ce_Time

	
	ce_X=str2num(SLP_ImgParamListW[LoadLEEM_sel][2])
	ce_Y=str2num(SLP_ImgParamListW[LoadLEEM_sel][3])
	ce_SampleTemp=str2num(SLP_ImgParamListW[LoadLEEM_sel][4])
	ce_FOV1=SLP_ImgParamListW[LoadLEEM_sel][5]
	ce_Notes=SLP_ImgParamListW[LoadLEEM_sel][13]
	ce_Date=SLP_ImgParamListW[LoadLEEM_sel][14]
	ce_Time=SLP_ImgParamListW[LoadLEEM_sel][15]
	
	//OVERLAY
	Variable FontSize=10
	String FontSizeTxt=""
	sprintf FontSizeTxt,"%02d",FontSize
	
	ControlInfo /W=SLP_LL_01 Check_ShowName
	Variable ShowName_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowXY
	Variable ShowPos_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowTemp
	Variable ShowTemp_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowFOV
	Variable ShowFOV_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowDate
	Variable ShowDate_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowTime
	Variable ShowTime_Flg=V_Value
	String OverlayText=""
	If (ShowName_Flg)
		OverlayText+=(SLP_ImgParamListW[LoadLEEM_sel][1]+"\r")
	EndIf
	If (ShowPos_Flg)
		OverlayText+=("x: "+SLP_ImgParamListW[LoadLEEM_sel][2]+" y: "+SLP_ImgParamListW[LoadLEEM_sel][3]+"\r")
	EndIf
	If (ShowTemp_Flg)
		OverlayText+=(SLP_ImgParamListW[LoadLEEM_sel][4]+" C\r")
	EndIf
	If (ShowFOV_Flg)
		OverlayText+=("FOV: "+SLP_ImgParamListW[LoadLEEM_sel][5]+"\r")
	EndIf
	If (ShowDate_Flg)
		OverlayText+=(SLP_ImgParamListW[LoadLEEM_sel][14]+"\r")
	EndIf
	If (ShowTime_Flg)
		OverlayText+=(SLP_ImgParamListW[LoadLEEM_sel][15]+"\r")
	EndIf
	OverlayText=RemoveEnding(OverlayText,"\r")
	TextBox /W=SLP_LL_01#SLP_LL_01_IMPLOT /K/N=MainDisplayTX
	TextBox /W=SLP_LL_01#SLP_LL_01_IMPLOT/A=LB/B=1/N=MainDisplayTX/F=0/A=MC/G=(0,60000,0) "\Z"+FontSizeTxt+OverlayText
End

Function SLP_LL_ExportSelImg_v2()
	//DESCRIPTIONs: Add a Prompt and options for users to include P and T vs. time graph in the image export. 
	//						Users can also specify the size of the image export in pixels and all exported image will have equal sizes 
	//						(so that making video by ImageJ will be easier).
	//MODIFIED: 05.01.2020 [from SLP_LL_ExportSelImg()]
	//MODIFIED: 17.03.2021 - Bug fixes - and add .jpg option for export.
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	SVAR CurrentImageName=root:Package_SLP:LoadLEEM:CurrentImageName
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgParamListSelW=$ImgParamSel_Fname
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	Wave CurrentImageW=$(SLP_ImgListW[LoadLEEM_Sel][2]+SLP_ImgListW[LoadLEEM_Sel][3])
	Wave Pressure_W=$(Pkg_Location+":"+CurrentDataSet+"_P")
	Wave Temp_W=$(Pkg_Location+":"+CurrentDataSet+"_T")
	Wave Time_W=$(Pkg_Location+":"+CurrentDataSet+"_Time")
	
	NVAR Export_FontSize=root:Package_SLP:LoadLEEM:Export_FontSize
	SVAR Export_Temp_Flg=root:Package_SLP:LoadLEEM:Export_Temp_Flg
	SVAR Export_Pressure_Flg=root:Package_SLP:LoadLEEM:Export_Pressure_Flg
	SVAR Export_ImageFormat=root:Package_SLP:LoadLEEM:Export_ImageFormat
	
	//Igor cannot DoPrompt for global variables
	Variable FontSize=Export_FontSize
	String Temp_Flg=Export_Temp_Flg
	String Pressure_Flg=Export_Pressure_Flg
	Variable widthPx=dimsize(CurrentImageW,1)
	Variable heightPx=dimsize(CurrentImageW,0)
	String ImageFormat
	
	Prompt Temp_Flg, "Temperature graph",PopUp "Yes;No;"
	Prompt Pressure_Flg, "Pressure graph",PopUp "Yes;No;"
	Prompt FontSize,"Font size"
	Prompt widthPx,"Image width (px)"
	Prompt heightPx,"Image height (px)"
	Prompt ImageFormat, "Image format to export",PopUp ".jpg;.tif;"
	DoPrompt "Select options",Temp_Flg,Pressure_Flg,FontSize,widthPx,heightPx,ImageFormat
	
	If (V_Flag==0) //If users click OK
		Export_FontSize=FontSize
		Export_Temp_Flg=Temp_Flg
		Export_Pressure_Flg=Pressure_Flg
		Export_ImageFormat=ImageFormat
		
		String FontSizeTxt=""
		sprintf FontSizeTxt,"%02d",FontSize
		
		ControlInfo /W=SLP_LL_01 Check_ShowName
		Variable ShowName_Flg=V_Value
		ControlInfo /W=SLP_LL_01 Check_ShowXY
		Variable ShowPos_Flg=V_Value
		ControlInfo /W=SLP_LL_01 Check_ShowTemp
		Variable ShowTemp_Flg=V_Value
		ControlInfo /W=SLP_LL_01 Check_ShowFOV
		Variable ShowFOV_Flg=V_Value
		ControlInfo /W=SLP_LL_01 Check_ShowDate
		Variable ShowDate_Flg=V_Value
		ControlInfo /W=SLP_LL_01 Check_ShowTime
		Variable ShowTime_Flg=V_Value
		String OverlayText=""
		
		Variable Overlay_Flg=ShowName_Flg||ShowPos_Flg||ShowTemp_Flg||ShowFOV_Flg||ShowDate_Flg||ShowTime_Flg
		
		//Choose folder to save image files
		GetFileFolderInfo /D/Q 
		If (V_Flag!=-1) //IF user select a folder
			NewPath /O/Q PathName, S_Path //Create SYMBOLIC path (cannot use normal text for path!)
		
			//Prepare textwave to convert to .csv file
			make /T/O /N=(1,dimsize(SLP_ImgParamListW,1)) SLP_ImgParamExpW
			wave SLP_ImgParamColDescrptn=root:Package_SLP:LoadLEEM:SLP_ImgParamColDescrptn
			duplicate /T/O SLP_ImgParamColDescrptn, SLP_ImgParamColDescrptn_tmp
			redimension /N=(1,dimsize(SLP_ImgParamColDescrptn,0)) SLP_ImgParamColDescrptn_tmp
			SLP_ImgParamExpW[0][]=SLP_ImgParamColDescrptn_tmp[0][q]
			killwaves SLP_ImgParamColDescrptn_tmp
		
			//Load selected images
			variable i=0
			variable j=1
			string FileName=""
			string ImgFName=""
			String Pos=""
			String Temp=""
			String FOV=""
			String RecordDateTime=""
			
			For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
				//if (SLP_ImgParamListSelW[i][0]==48)
				If (SLP_ImgParamListSelW[i][0]&0x10) //[20201230b] Use bitwise operation
					ImgFName=SLP_ImgListW[i][2]+SLP_ImgListW[i][3]
					wave ImgW=$ImgFName
					FileName=SLP_ImgListW[i][3]
					
					If (!Overlay_Flg)
						StrSwitch(ImageFormat)
							Case ".jpg":
								FileName+=".jpg"
								ImageSave /IGOR /T="jpeg" /P=PathName ImgW as FileName //(cannot use normal text for path!)
								break
							Case ".tif":
								FileName+=".TIFF"
								ImageSave /IGOR /T="tiff" /P=PathName ImgW as FileName //(cannot use normal text for path!)
								break
						EndSwitch
					ElseIf (OverLay_Flg || Stringmatch(Temp_Flg,"Yes"))
						DoWindow/K LoadLEEM_Export
						NewImage /N=LoadLEEM_Export ImgW
						Modifygraph width=widthPx,height=heightPx
						modifygraph tick=3,nolabel=2
						If (ShowName_Flg)
							OverlayText+=(SLP_ImgParamListW[i][1]+"\r")
						EndIf
						If (ShowPos_Flg)
							OverlayText+=("x: "+SLP_ImgParamListW[i][2]+" y: "+SLP_ImgParamListW[i][3]+"\r")
						EndIf
						If (ShowTemp_Flg)
							OverlayText+=(SLP_ImgParamListW[i][4]+" C\r")
						EndIf
						If (ShowFOV_Flg)
							OverlayText+=("FOV: "+SLP_ImgParamListW[i][5]+"\r")
						EndIf
						If (ShowDate_Flg)
							OverlayText+=(SLP_ImgParamListW[i][14]+"\r")
						EndIf
						If (ShowTime_Flg)
							OverlayText+=(SLP_ImgParamListW[i][15]+"\r")
						EndIf
						
						If (Stringmatch(Temp_Flg,"Yes")||StringMatch(Export_Pressure_Flg,"Yes"))
							ModifyGraph /W=LoadLEEM_Export height=heightPx,width=widthPx,margin(bottom)=200
							Display /HOST=LoadLEEM_Export /N=PvT /W=(10, heightPx+10, widthPx+10, heightPx+10+210 )
							Modifygraph /W=LoadLEEM_Export#PvT mirror=1
							If (Stringmatch(Temp_Flg,"Yes"))
								appendtograph /L=left/W=LoadLEEM_Export#PvT Temp_W vs time_W
								Cursor /W=LoadLEEM_Export#PvT /P A $(CurrentDataSet+"_T") i
								Label /W=LoadLEEM_Export#PvT left "Temperature (C)"
								If (Stringmatch(Pressure_Flg,"No"))
									Modifygraph /W=LoadLEEM_Export#PvT mirror=1
								EndIf
							EndIf
							
							If (Stringmatch(Pressure_Flg,"Yes"))
								appendtograph /R=right/W=LoadLEEM_Export#PvT Pressure_W vs time_W
								Cursor /W=LoadLEEM_Export#PvT /P B $(CurrentDataSet+"_P") i
								Modifygraph /W=LoadLEEM_Export#PvT rgb($(CurrentDataSet+"_P"))=(0,65535,0)
								Label /W=LoadLEEM_Export#PvT right "Pressure (mB)"
								If (Stringmatch(Temp_Flg,"No"))
									Modifygraph /W=LoadLEEM_Export#PvT mirror=1
								EndIf
							EndIf
							Label /W=LoadLEEM_Export#PvT bottom "time"
							Modifygraph /W=LoadLEEM_Export#PvT mirror(bottom)=1, fSize=FontSize
						EndIf
						
						OverlayText=RemoveEnding(OverlayText,"\r")
						TextBox /W=LoadLEEM_Export/A=LB/B=1/N=Temp/F=0/A=MC/G=(0,60000,0) "\Z"+FontSizeTxt+OverlayText
						StrSwitch(ImageFormat)
							Case ".jpg":
								FileName+=".jpg"
								SavePict /WIN=LoadLEEM_Export /SNAP=1/E=-6 /P=PathName as FileName // /SNAP=1 = include cursor in the image save.
								break
							Case ".tif":
								FileName+=".TIFF"
								SavePict /WIN=LoadLEEM_Export /SNAP=1/E=-7 /P=PathName as FileName // /SNAP=1 = include cursor in the image save.
								break
						EndSwitch
						
						Dowindow /K LoadLEEM_Export
						OverlayText="" //Reset the overlay
					EndIf
					redimension /N=(dimsize(SLP_ImgParamExpW,0)+1,dimsize(SLP_ImgParamExpW,1)) SLP_ImgParamExpW
					SLP_ImgParamExpW[j][]=SLP_ImgParamListW[i][q]
					j+=1
				Endif
			Endfor
			
			//Create .csv file w/ image details
			//edit SLP_ImgParamExpW
			string out_name="Parameter_List_"+CurrentDataSet+".csv"
			Save/G /O /M="\n" /P=PathName SLP_ImgParamExpW as out_name
			killwaves SLP_ImgParamExpW
		EndIf
	EndIf
End

Function SLP_LL_ExportSelImg()
	
	Variable FontSize=12
	String FontSizeTxt=""
	sprintf FontSizeTxt,"%02d",FontSize
	
	ControlInfo /W=SLP_LL_01 Check_ShowName
	Variable ShowName_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowXY
	Variable ShowPos_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowTemp
	Variable ShowTemp_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowFOV
	Variable ShowFOV_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowDate
	Variable ShowDate_Flg=V_Value
	ControlInfo /W=SLP_LL_01 Check_ShowTime
	Variable ShowTime_Flg=V_Value
	String OverlayText=""
	
	Variable Overlay_Flg=ShowName_Flg||ShowPos_Flg||ShowTemp_Flg||ShowFOV_Flg||ShowDate_Flg||ShowTime_Flg
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgParamListSelW=$ImgParamSel_Fname
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	//Choose folder to save image files
	GetFileFolderInfo /D/Q 
	If (V_Flag!=-1) //IF user select a folder
		NewPath /O/Q PathName, S_Path //Create SYMBOLIC path (cannot use normal text for path!)
	
		//Prepare textwave to convert to .csv file
		make /T/O /N=(1,dimsize(SLP_ImgParamListW,1)) SLP_ImgParamExpW
		wave SLP_ImgParamColDescrptn=root:Package_SLP:LoadLEEM:SLP_ImgParamColDescrptn
		duplicate /T/O SLP_ImgParamColDescrptn, SLP_ImgParamColDescrptn_tmp
		redimension /N=(1,dimsize(SLP_ImgParamColDescrptn,0)) SLP_ImgParamColDescrptn_tmp
		SLP_ImgParamExpW[0][]=SLP_ImgParamColDescrptn_tmp[0][q]
		killwaves SLP_ImgParamColDescrptn_tmp
	
		//Load selected images
		variable i=0
		variable j=1
		string FileName=""
		string ImgFName=""
		String Pos=""
		String Temp=""
		String FOV=""
		String RecordDateTime=""
		
		For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
			//if (SLP_ImgParamListSelW[i][0]==48)
			If (SLP_ImgParamListSelW[i][0]&0x10) //[20201230b] Use bitwise operation
				ImgFName=SLP_ImgListW[i][2]+SLP_ImgListW[i][3]
				wave ImgW=$ImgFName
				FileName=SLP_ImgListW[i][3]+".TIFF"
				//Filename="test"+num2str(i)
				
				If (!Overlay_Flg)
					ImageSave /IGOR /T="tiff" /P=PathName ImgW as FileName //(cannot use normal text for path!)
				Else
					DoWindow/K LoadLEEM_Export
					NewImage /N=LoadLEEM_Export ImgW
					If (ShowName_Flg)
						OverlayText+=(SLP_ImgParamListW[i][1]+"\r")
					EndIf
					If (ShowPos_Flg)
						OverlayText+=("x: "+SLP_ImgParamListW[i][2]+" y: "+SLP_ImgParamListW[i][3]+"\r")
					EndIf
					If (ShowTemp_Flg)
						OverlayText+=(SLP_ImgParamListW[i][4]+" C\r")
					EndIf
					If (ShowFOV_Flg)
						OverlayText+=("FOV: "+SLP_ImgParamListW[i][5]+"\r")
					EndIf
					If (ShowDate_Flg)
						OverlayText+=(SLP_ImgParamListW[i][14]+"\r")
					EndIf
					If (ShowTime_Flg)
						OverlayText+=(SLP_ImgParamListW[i][15]+"\r")
					EndIf
					OverlayText=RemoveEnding(OverlayText,"\r")
					TextBox /W=LoadLEEM_Export/A=LB/B=1/N=Temp/F=0/A=MC/G=(0,60000,0) "\Z"+FontSizeTxt+OverlayText
					SavePict /WIN=LoadLEEM_Export /E=-7 /P=PathName as FileName
					Dowindow /K LoadLEEM_Export
					OverlayText="" //Reset the overlay
				EndIf
				
				
				redimension /N=(dimsize(SLP_ImgParamExpW,0)+1,dimsize(SLP_ImgParamExpW,1)) SLP_ImgParamExpW
				SLP_ImgParamExpW[j][]=SLP_ImgParamListW[i][q]
				j+=1
			Endif
		Endfor
		
		//Create .csv file w/ image details
		//edit SLP_ImgParamExpW
		string out_name="Parameter_List_"+CurrentDataSet+".csv"
		Save/G /O /M="\n" /P=PathName SLP_ImgParamExpW as out_name
		killwaves SLP_ImgParamExpW
	EndIf
End

Function SLP_LoadLEEM_batch(DataSetName,ImageW_BaseName,resize) //If resize =0 -> no resize
	string DataSetName
	string ImageW_BaseName
	variable resize
	
	NVAR LEEMdata_pointer=root:Package_SLP:LoadLEEM:LEEMdata_pointer
	NVAR LEEMimage_pointer=root:Package_SLP:LoadLEEM:LEEMimage_pointer 
	
	NVAR N_datasets=root:Package_SLP:LoadLEEM:N_datasets
	
	NVAR ce_OBJ=root:Package_SLP:LoadLEEM:ce_OBJ
	NVAR ce_STV=root:Package_SLP:LoadLEEM:ce_STV
	NVAR ce_SampleTemp=root:Package_SLP:LoadLEEM:ce_SampleTemp
	NVAR ce_X=root:Package_SLP:LoadLEEM:ce_X
	NVAR ce_Y=root:Package_SLP:LoadLEEM:ce_Y
	NVAR ce_Exposure=root:Package_SLP:LoadLEEM:ce_Exposure
	SVAR ce_PressureTag1=root:Package_SLP:LoadLEEM:ce_PressureTag1
	NVAR ce_Pressure1=root:Package_SLP:LoadLEEM:ce_Pressure1
	SVAR ce_PressureTag2=root:Package_SLP:LoadLEEM:ce_PressureTag2
	NVAR ce_Pressure2=root:Package_SLP:LoadLEEM:ce_Pressure2
	SVAR ce_FOV1=root:Package_SLP:LoadLEEM:ce_FOV1
	SVAR ce_FOV2=root:Package_SLP:LoadLEEM:ce_FOV2
	
	NVAR N_Images=root:Package_SLP:LoadLEEM:N_Images
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+DataSetName
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	redimension /N=(dimsize(SLP_ImgSetListW,0)+1,4) SLP_ImgSetListW
	redimension /N=(dimsize(SLP_ImgSetListSelW,0)+1,4) SLP_ImgSetListSelW
	SLP_ImgSetListSelW[dimsize(SLP_ImgSetListSelW,0)-1][0]=32
	
	variable i=0
	string Filename=""
	string ImgName=""
	
	string Current_folder=getdatafolder(1)
	newdatafolder /O $DataSetName
	setdatafolder $DataSetName
	string creation_Date
	string creation_Time
	string creation_Text
	
	For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
		FileName=SLP_ImgListW[i][0]+SLP_ImgListW[i][1]
		ImgName=stringfromlist(0,SLP_ImgListW[i][1],".") //Remove the file extension
		
		SLP_LoadLEEM_LoadImage(Filename,ImgName)
		
		wave ImageW=$ImgName
		
		//Resize the image wave to save the RAM
		if (resize!=0)
			SLP_Resize_Img_Overwrite(ImgName,resize)
		endif
		
		//Record image wave's name and location
		SLP_ImgListW[i][2]=Current_folder+DataSetName+":"
		SLP_ImgListW[i][3]=ImgName
		SLP_ImgListW[i][4]=num2str(LEEMdata_pointer)
		SLP_ImgListW[i][5]=num2str(LEEMimage_pointer)
		
		//Read from LEEM Data block and write down image parameters
		SLP_LoadLEEM_getParam(LEEMdata_pointer,LEEMimage_pointer,Filename)
		SLP_ImgParamListW[i][1]=ImgName
		SLP_ImgParamListW[i][2]=num2str(ce_X)
		SLP_ImgParamListW[i][3]=num2str(ce_Y)
		SLP_ImgParamListW[i][4]=num2str(ce_SampleTemp)
		SLP_ImgParamListW[i][5]=ce_FOV1
		SLP_ImgParamListW[i][6]=ce_FOV2
		SLP_ImgParamListW[i][7]=num2str(ce_STV)
		SLP_ImgParamListW[i][8]=num2str(ce_OBJ)
		SLP_ImgParamListW[i][9]=ce_PressureTag1
		SLP_ImgParamListW[i][10]=num2str(ce_Pressure1)
		SLP_ImgParamListW[i][11]=ce_PressureTag2
		SLP_ImgParamListW[i][12]=num2str(ce_Pressure2)
		//Unused slots for extra parameters
		//SLP_ImgParamListW[i][13]=
		GetFileFolderInfo FileName
		creation_Date=secs2date(V_modificationDate,1)
		creation_Time=secs2Time(V_modificationDate,1)
		SLP_ImgParamListW[i][14]=creation_Date+" "+creation_Time
		//SLP_ImgParamListW[i][15]=
		
		
	Endfor
	
	//Record new list name in the Image Set List wave
	SLP_ImgSetListW[N_DataSets][1]=DataSetName
	SLP_ImgSetListW[N_DataSets][2]=num2str(resize)
	SLP_ImgSetListW[N_DataSets][3]=num2str(N_images)
	N_DataSets+=1
	
	setdatafolder $Current_folder

End

Function SLP_LoadFullSize()
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgListW_FName=Pkg_Location+":SLP_ImgListW"
	string ImgParamListW_FName=Pkg_Location+":SLP_ImgParamListW"
	wave /T ImgListW=$ImgListW_FName
	wave /T ImgParamListW=$ImgParamListW_FName
	string CurrentImage_FName=ImgListW[LoadLEEM_Sel][3]
	string CurrentImage_FLocation=ImgListW[LoadLEEM_Sel][0]+ImgListW[LoadLEEM_Sel][1]

	SLP_LoadLEEM_LoadImage(CurrentImage_FLocation,CurrentImage_FName)
	
	wave ImgW=$CurrentImage_FName
		
	String ImgLabel_L1="Image wave name: "+ImgListW[LoadLEEM_Sel][3]
	String ImgLabel_L2="(x,y): ("+ImgParamListW[LoadLEEM_Sel][2]+"mm ,"+ImgParamListW[LoadLEEM_Sel][3]+"mm), FOV: "+ImgParamListW[LoadLEEM_Sel][5]
	String ImgLabel_L3="Temperature: "+ImgParamListW[LoadLEEM_Sel][4]+ "°C"
	String Note_String=ImgLabel_L1+"\r"+ImgLabel_L2+"\r"+ImgLabel_L3
	Note ImgW,Note_String
	
	NewImage ImgW
	//ModifyGraph margin(bottom)=60
	SetAxis /A/R left //Reverse y axis [(0,0) is at the top left]
	Legend /A=RB "\Z08"+Note_String
End








Function SLP_LoadLEEM_setup2(DataSetName,ImgPath,BaseName,Num_start,Num_end)
//Create list of images and save the list in the LoadLEEM package folder. Have to do this before SLP_LoadLEEM_batch()
	
	string DatasetName
	string ImgPath
	string BaseName
	string Num_start
	string Num_end
	
	NewPath/O ImgPathP ImgPath
	
	string CurrentFolder=getdatafolder(1)
	
	string Data_folder_name=CurrentFolder+DatasetName
	string Pkg_folder_name="root:Package_SLP:LoadLEEM:"+DataSetName
	
	newdatafolder /O $Data_folder_name
	newdatafolder /O $Pkg_folder_name
	
	string Filelist= indexedfile(ImgPathP,-1,".DAT")
	
	Filelist=sortlist(Filelist)
	NVAR N_images=root:Package_SLP:LoadLEEM:N_images
	variable i=0
	variable j=0
	variable m=str2num(Num_end)
	string FileName=""
	
	string ImageList=""
	string Num=Num_start
	string srcName=BaseName+Num+".dat"
	
	//Reduce the image list to the specified range
	
	For (i=str2num(Num_start);i<=str2num(Num_end);i+=1)
		sprintf Num,"%06.0f",i//[TODO] - 6 total digit is the LEEM default but should be generalised later
		SrcName=BaseName+Num+".dat" //Search name is created
		
		j=WhichListItem(SrcName,Filelist) //Find the file name that match the search name
		if (j!=-1)
			FileName=stringfromlist(j,Filelist) //Name of the image file
			ImageList=Addlistitem(FileName,ImageList,";",ItemsInList(ImageList)) //Append the new file name to the list
		Endif
		
	Endfor
	
	N_images=itemsinlist(ImageList)
	
	setdatafolder $Pkg_folder_name
	make /T /O /N=(N_images,6) SLP_ImgListW=""
	make /T /O /N=(N_images,16) SLP_ImgParamListW=""
	make /O /N=(N_images,16) SLP_ImgParamListSelW=0
	SLP_ImgParamListSelW[][0]=32
	variable /G LoadLEEM_Sel_Recall
	variable /G SetScale_Flg=0
	
	For (i=0;i<N_images;i+=1)
		SLP_ImgListW[i][0]=ImgPath
		SLP_ImgListW[i][1]=stringfromlist(i,ImageList,";")
		
	Endfor
	
	setdatafolder $CurrentFolder
	
End

Function SLP_LoadLEEM_setup(DataSetName,ImgPath,BaseName,Num_start,Num_end)
//Create list of images and save the list in the LoadLEEM package folder. Have to do this before SLP_LoadLEEM_batch()
	
	string DatasetName
	string ImgPath
	string BaseName
	string Num_start
	string Num_end
	
	NewPath/O ImgPathP ImgPath
	
	string CurrentFolder=getdatafolder(1)
	
	string Data_folder_name=CurrentFolder+DatasetName
	string Pkg_folder_name="root:Package_SLP:LoadLEEM:"+DataSetName
	
	newdatafolder /O $Data_folder_name
	newdatafolder /O $Pkg_folder_name
	
	string Filelist= indexedfile(ImgPathP,-1,".DAT")
	
	Filelist=sortlist(Filelist)
	variable N_images=itemsinlist(Filelist)
	variable i=0
	variable j=str2num(Num_start)
	variable m=str2num(Num_end)
	string FileName=""
	
	string ImageList=""
	string Num=Num_start
	string srcName=BaseName+Num+".dat"
	
	//Reduce the image list to the specified range
	For (i=0;i<N_images&&j<=m;i+=1)
		FileName=stringfromlist(i,Filelist)
		if (stringmatch(FileName,srcName))
			//append filename to the end of the list
			ImageList=Addlistitem(FileName,ImageList,";",ItemsInList(ImageList))
			
			j+=1
			sprintf Num,"%06.0f",j//[TODO] - 6 total digit is the LEEM default but should be generalised later
			SrcName=BaseName+Num+".dat"
		Endif
	Endfor
	
	N_images=itemsinlist(ImageList)
	
	setdatafolder $Pkg_folder_name
	make /T /O /N=(N_images,6) SLP_ImgListW=""
	make /T /O /N=(N_images,16) SLP_ImgParamListW=""
	variable /G LoadLEEM_Sel_Recall
	
	For (i=0;i<N_images;i+=1)
		SLP_ImgListW[i][0]=ImgPath
		SLP_ImgListW[i][1]=stringfromlist(i,ImageList,";")
		
	Endfor
	
	setdatafolder $CurrentFolder

End

Function SLP_Util_CheckLegalName(Name)
	String Name
	Variable Type
	String CorrectedName=""
	CorrectedName=Cleanupname(Name,0)
	return (stringmatch(Name,CorrectedName)) //Return 1 if Name is legal
End





Function ce_Load_LEEM_DAT(ce_StartAddress,ce_EndAddress,ce_Filename)
	variable ce_StartAddress //=520
	variable ce_EndAddress //=1687
	string ce_Filename
	
	variable ce_addr=ce_StartAddress
	variable ce_file
	string ce_Path
	//newpath ce_Path, "Macintosh HD:Users:ChananEuaruksakul:Dropbox:SLRI:20160823b:test_CE_cu110_000006.dat"
	open /R ce_file as ce_Filename
	
	fsetpos ce_file,ce_addr
	
	string ce_loadString
	string ce_unit_code
	string ce_unit
	variable ce_loadChar
	variable ce_loadInt
	variable ce_loadFloat
	string ce_loadFloatStr
	
	string ce_ElementName
	
	variable i=0
	
	Do
		fbinread /F=1 ce_file, ce_loadInt //Load the ID
		If (ce_loadInt<0)
			ce_loadInt+=128 //Change from signed to unsigned Integer
		endif
		
		//print "ID:"+num2str(ce_loadInt)
		
		if ((ce_loadInt>=0)&&(ce_loadInt<=99))
			//||(ce_loadInt>=128)&&(ce_loadInt<=227))
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			ce_unit_code=ce_loadString[strlen(ce_loadString)-2]
			ce_ElementName=ce_loadString[0,strlen(ce_loadString)-3]
			fbinread /F=4 ce_file,ce_loadFloat
			sprintf ce_loadFloatStr, "%5.2f", ce_loadFloat
			StrSwitch (ce_unit_code)
				case "1":
					ce_unit="V"
					break
				case "2":
					ce_unit="mA"
					break
			Endswitch
			
			//print ce_ElementName+": "+ce_loadFloatStr+" "+ce_unit

		Elseif (ce_loadInt==100)
			//print "Micrometer X,Y"
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
			
		Elseif (ce_loadInt==104)
			//print "Exposure"
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
			fbinread /F=1 ce_file,ce_loadChar
			//print ce_loadChar
			fbinread /F=1 ce_file,ce_loadChar
			//print ce_loadChar
			
		Elseif (ce_loadInt==105)
			//print "Title block"
			Fstatus ce_file
			ce_addr=V_filePos+2
			fsetpos ce_file,ce_addr
		
		
		Elseif ((ce_loadInt==106)||(ce_loadInt==107))
			//print "Pressure"
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			//print ce_loadString
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			//print ce_loadString
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
		
		Elseif (ce_loadInt==110)
			//print "FOV"
			FReadLine /T=(num2char(9)) ce_file,ce_loadString //This - not sure why num2char(9)
			//print "Preset A: "+ce_loadString
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			//print "Preset B: "+ce_loadString
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
			
		Elseif (ce_loadInt==114)
			//print "Mirror state"
			Fstatus ce_file
			ce_addr=V_filePos+2
			fsetpos ce_file,ce_addr
			
		Elseif (ce_loadInt==115)
			//print "MCPscr"
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
		
		Elseif (ce_loadInt==116)
			//print "MCPcp"
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
		
		Endif
	
		Fstatus ce_file
	While (V_filePos<ce_EndAddress)
	
	close ce_file

End



Function ce_get_LEEM_Coord(ce_StartAddress,ce_EndAddress,ce_Filename)
	variable ce_StartAddress //=520
	variable ce_EndAddress //=1687
	string ce_Filename
	
	SVAR  ce_X
	SVAR  ce_Y
	SVAR  ce_FOV
	
	variable ce_addr=ce_StartAddress
	variable ce_file
	string ce_Path
	//newpath ce_Path, "Macintosh HD:Users:ChananEuaruksakul:Dropbox:SLRI:20160823b:test_CE_cu110_000006.dat"
	open /R ce_file as ce_filename
	
	fsetpos ce_file,ce_addr
	
	string ce_loadString
	string ce_unit_code
	string ce_unit
	variable ce_loadChar
	variable ce_loadInt
	variable ce_loadFloat
	string ce_loadFloatStr
	
	string ce_ElementName
	
	variable i=0
	
	Do
		fbinread /F=1 ce_file, ce_loadInt //Read the ID (1 byte)
		
		//Change from signed to unsigned Integer
		//(UView use this to separated 'displayed' and 'no displayed' parameters on screen
		If (ce_loadInt<0)
			ce_loadInt+=128 
		endif
		
		//print "ID:"+num2str(ce_loadInt)
		
		
		if ((ce_loadInt>=0)&&(ce_loadInt<=99)) //The first 100 ID's are for lenses
			
			FReadLine /T=(num2char(0)) ce_file,ce_loadString //Skip the Parameter Name string and unit string
			Fstatus ce_file
			ce_addr=V_filePos+4
			fsetpos ce_file,ce_addr
			
		Elseif (ce_loadInt==100)
			//print "Micrometer X,Y"
			fbinread /F=4 ce_file,ce_loadFloat
			ce_X=num2str(ce_loadFloat)
			//print ce_loadFloat
			fbinread /F=4 ce_file,ce_loadFloat
			ce_Y=num2str(ce_loadFloat)
			//print ce_loadFloat
			
		Elseif (ce_loadInt==104)
			Fstatus ce_file
			ce_addr=V_filePos+6
			fsetpos ce_file,ce_addr
			
		Elseif (ce_loadInt==105)
			Fstatus ce_file
			ce_addr=V_filePos+2
			fsetpos ce_file,ce_addr
		
		Elseif ((ce_loadInt==106)||(ce_loadInt==107))
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			fstatus ce_file
			ce_addr=V_filePos+4
			fsetpos ce_file,ce_addr
		
		Elseif (ce_loadInt==110)
			//print "FOV"
			FReadLine /T=(num2char(9)) ce_file,ce_loadString
			//print "Preset A: "+ce_loadString
			ce_FOV=ce_loadString
			FReadLine /T=(num2char(0)) ce_file,ce_loadString
			//print "Preset B: "+ce_loadString
			fbinread /F=4 ce_file,ce_loadFloat
			//print ce_loadFloat
			
		Elseif (ce_loadInt==114)
			Fstatus ce_file
			ce_addr=V_filePos+2
			fsetpos ce_file,ce_addr
			
		Elseif (ce_loadInt==115)
			Fstatus ce_file
			ce_addr=V_filePos+4
			fsetpos ce_file,ce_addr
		
		Elseif (ce_loadInt==116)
			Fstatus ce_file
			ce_addr=V_filePos+4
			fsetpos ce_file,ce_addr
			
		Endif
	
		Fstatus ce_file
	While (V_filePos<ce_EndAddress)
	
	close ce_file

End

Function ce_List_Images2()

	string ce_Filename=""
	getfilefolderinfo/D
	newpath/O ce_Path S_path
	string ce_filelist= indexedfile(ce_Path,-1,".DAT")
	string ce_path_str=S_path
	//print ce_filelist
	
	ce_filelist=sortlist(ce_filelist)
	
	variable i=0
	
	//make /O/T/N=(2048,itemsinlist(ce_filelist)) ce_List_W
	wave /T SLP_LoadLEEM_ImgListW=root:Package_SLP:LoadLEEM:SLP_LoadLEEM_ImgListW
	
	For (i=0;i<itemsinlist(ce_filelist);i+=1)
		SLP_LoadLEEM_ImgListW[i][0]=ce_path_str
		SLP_LoadLEEM_ImgListW[i][1]=stringfromlist(i,ce_filelist)
		SLP_LoadLEEM_ImgListW[i][3]=""
		SLP_LoadLEEM_ImgListW[i][4]=""
	Endfor

End

Function ce_List_Images()

	string /G ce_X=""
	string /G ce_Y=""
	string /G ce_FOV=""
	string ce_Filename=""
	getfilefolderinfo/D
	newpath/O ce_Path S_path
	string ce_filelist= indexedfile(ce_Path,-1,".DAT")
	string ce_path_str=S_path
	//print ce_filelist
	
	ce_filelist=sortlist(ce_filelist)
	
	variable i=0
	
	make /O/T/N=(2048,itemsinlist(ce_filelist)) ce_List_W
	
	For (i=0;i<itemsinlist(ce_filelist);i+=1)
		ce_List_W[i][0]=ce_path_str
		ce_List_W[i][1]=stringfromlist(i,ce_filelist)
		ce_Filename=ce_path_str+stringfromlist(i,ce_filelist)
		ce_get_LEEM_Coord(520,1687,ce_Filename)
		ce_List_W[i][2]=ce_X
		ce_List_W[i][3]=ce_Y
		ce_List_W[i][4]=ce_FOV
	Endfor

End

function SLP_Resize_Img_Overwrite(inputwave,SLP_resizeFactor)
 
	string inputwave						// for input wave
 	variable SLP_resizeFactor
 
	wave input=$inputwave	
	
	string newname=inputwave+"_SZ"	
 
	imageinterpolate/F={SLP_resizeFactor,SLP_resizeFactor}/DEST=$newname bilinear input   // image interpolation
 	
 	wave newImg=$newname
 	
 	duplicate /O newImg, input
 	
 	killwaves $newname
 
end

function SLP_Resize_Img(inputwave,SLP_resizeFactor)
 
	string inputwave						// for input wave
 	variable SLP_resizeFactor
 
	wave input=$inputwave	
	
	string newname=inputwave+"_SZ"	
 
	imageinterpolate/F={SLP_resizeFactor,SLP_resizeFactor}/DEST=$newname bilinear input   // image interpolation
 
end

//From http://www.igorexchange.com/node/2022
function Resize()
 
	string inputwave						// for input wave
 
	string list=wavelist("*",";","DIMS:2")			// only find image stacks
 
	prompt inputwave, "Wave Select", popup list	// prompt for input wave
	doprompt "Resize", inputwave
			if(V_flag==1)
			abort
	endif
 
	wave input=$inputwave	
 
	variable x=dimsize(input,0)				// current size of the x dimension
	variable y=dimsize(input,1)				// current size of the y dimension
 
	variable xnew = x							// variables for the new pixels, set to display the old ones in the prompt
	variable ynew = y
 
	prompt xnew, "new x pixels"			
	prompt ynew, "new y pixels"
	doprompt "new dimensions", xnew, ynew
			if(V_flag==1)
			abort
		endif
 
	string newname=inputwave+"_SZ"			// output wave name
 
	variable nx= (xnew-1)/(x-1)					// calc for rescaling
	variable ny=(ynew-1)/(y-1)
 
 
	imageinterpolate/F={nx,ny}/DEST=$newname bilinear input   // image interpolation
 
 
end

Function ButtonProc_LL_Stitch_Cancel(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K Stitch_Panel_01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_Stitch_Init()
	string Current_folder=getdatafolder(1)
	newdatafolder /O root:Package_SLP
	newdatafolder /O root:Package_SLP:Stitch
	newdatafolder /O root:Package_SLP:Stitch:ImgAnalyzeParticles
	
	//Create global variable in Stitch folder
	setdatafolder root:Package_SLP:Stitch
	
	variable /G SLP_LL_SetScale_Sel=0
	
	make /O /T /N=(32,3) SLP_FOV_table //Col. 1= FOV name, Col. 2 = FOV (number in microns), Col. 3 = rotation
	SLP_FOV_table[0][0]= {"100µm","75µm","50µm","25µm","15µm","10µm","7.5µm","5µm","3µm","2µm","LEED/PEAD","disp._pl.","","","","","","","","","","","","","","","","","","","",""}
	SLP_FOV_table[0][1]= {"100","75","50","25","15","10","7.5","5","3","2","XXX","YYY","","","","","","","","","","","","","","","","","","","",""}
	SLP_FOV_table[0][2]={"0","0","0","0","0","0","0","0","0","0","0","0","","","","","","","","","","","","","","","","","","","",""}
	//[TODO] - Check the rotation for each FOV
	
	variable /G SLP_Stitch_XRes=200
	variable /G SLP_Stitch_YRes=200
	variable /G SLP_Stitch_Threshold=50
	variable /G SLP_Stitch_AngleAdj=0 //Adjust the angle between micrometer and image coordinates
	variable /G SLP_Stitch_FOVAdj=1.00 //Adjust the FOV size from the defined value
	string /G SLP_Stitch_ImWName="Stitched_Image"
	//variable /G SLP_St_xmax
	//variable /G SLP_St_ymin
	//variable /G SLP_St_ymax
	
	//Create global variable in ImgAnalyzeParticles folder (For finding screen position)
	setdatafolder root:Package_SLP:Stitch:ImgAnalyzeParticles
	string /G ImgWName
	variable /G min_ScreenSize=1000
	variable /G FindScreenTh=50
	
	variable /G xCenter
	variable /G yCenter
	variable /G xMax
	variable /G xMin
	variable /G yMax
	variable /G yMin
	variable /G pixelSizeX
	variable /G pixelSizeY
	
	variable /G new_xCenter
	variable /G new_yCenter
	variable /G new_xMax
	variable /G new_xMin
	variable /G new_yMax
	variable /G new_yMin
	variable /G new_pixelSizeX
	variable /G new_pixelSizeY
	
	setdatafolder $Current_folder
End

Function slp_AddScale_StandAlone(ImageWaveName,FOV,threshold)
	string ImageWaveName
	variable FOV
	variable threshold
	
	wave ImageWave=$ImageWaveName
	
	variable min_ScreenSize=dimsize(ImageWave,0)*dimsize(ImageWave,1)*0.4
	print "Min Screen Size = "+num2str(min_ScreenSize)
	
	ImageThreshold /Q/I/T=(threshold) ImageWave 
	wave slp_ImageThresh=M_ImageThresh
	
	ImageAnalyzeParticles /E/W/Q/M=3 /A=(min_ScreenSize) /F stats, slp_ImageThresh
	
	wave W_xmin
	wave W_xmax
	wave W_ymin
	wave W_ymax
	
	variable xmin=W_xmin[0]//scale
	variable xmax=W_xmax[0]//scale
	variable ymin=W_ymin[0]//scale
	variable ymax=W_ymax[0]//scale
	
	print "xmin = "+num2str(xmin)
	print "xmax = "+num2str(xmax)
	print "ymin = "+num2str(ymin)
	print "ymax = "+num2str(ymax)
	
	//newimage slp_ImageThresh
	
	variable xCenter=(xmin+xmax)/2
	variable yCenter=(ymin+ymax)/2
	
	print "xCenter = "+num2str(xCenter)
	print "yCenter = "+num2str(yCenter)
	
	variable pixelSizeX=FOV/(xmax-xmin)
	variable pixelSizeY=FOV/(ymax-ymin)
	
	setscale /P x,-1*xCenter*pixelSizeX,pixelSizeX,"Micron",ImageWave
	
	setscale /P y,-1*yCenter*pixelSizeY,pixelSizeY,"Micron",ImageWave

End

Function SLP_SetLEEMScale_Pixel(ImageWaveName,Resize)
	string ImageWaveName
	variable Resize
	
	wave ImageWave=$ImageWaveName
	
	setscale /P x,0,1/Resize,"Pixel",ImageWave
	
	setscale /P y,0,1/Resize,"Pixel",ImageWave

End

Function SLP_SetLEEMScale(ImageWaveName,FOV,Resize)
	string ImageWaveName
	variable FOV
	variable Resize
	
	wave ImageWave=$ImageWaveName
	
	NVAR xmin=root:Package_SLP:Stitch:ImgAnalyzeParticles:xmin
	NVAR xmax=root:Package_SLP:Stitch:ImgAnalyzeParticles:xmax
	NVAR ymin=root:Package_SLP:Stitch:ImgAnalyzeParticles:ymin
	NVAR ymax=root:Package_SLP:Stitch:ImgAnalyzeParticles:ymax
	
	//Adjust with the Resize scaling
	variable xmin_s=xmin*Resize
	variable xmax_s=xmax*Resize
	variable ymin_s=ymin*Resize
	variable ymax_s=ymax*Resize
	
	
	variable xCenter_s=(xmin_s+xmax_s)/2
	variable yCenter_s=(ymin_s+ymax_s)/2
	
	variable pixelSizeX=FOV/(xmax_s-xmin_s)
	variable pixelSizeY=FOV/(ymax_s-ymin_s)
	
	setscale /P x,-1*xCenter_s*pixelSizeX,pixelSizeX,"Micron",ImageWave
	
	setscale /P y,-1*yCenter_s*pixelSizeY,pixelSizeY,"Micron",ImageWave

End

Function SLP_SetLEEMScale_absolute(ImageWaveName,FOV,Resize,Micrometer_x,Micrometer_y,Micrometer_angle)
	string ImageWaveName
	variable FOV
	variable Resize
	variable Micrometer_x
	variable Micrometer_y
	variable Micrometer_angle
	
	//[TODO] - check here to see if it match the real movement of the micrometer
	variable Offset_x=(Micrometer_x*cos(Micrometer_angle)-Micrometer_y*sin(Micrometer_angle))*1000*-1
	variable Offset_y=(Micrometer_x*sin(Micrometer_angle)+Micrometer_y*cos(Micrometer_angle))*1000*-1
	//Times 1000 to convert from mm -> um
	
	
	wave ImageWave=$ImageWaveName
	
	NVAR xmin=root:Package_SLP:Stitch:ImgAnalyzeParticles:xmin
	NVAR xmax=root:Package_SLP:Stitch:ImgAnalyzeParticles:xmax
	NVAR ymin=root:Package_SLP:Stitch:ImgAnalyzeParticles:ymin
	NVAR ymax=root:Package_SLP:Stitch:ImgAnalyzeParticles:ymax
	
	//Adjust with the Resize scaling
	variable xmin_s=xmin*Resize
	variable xmax_s=xmax*Resize
	variable ymin_s=ymin*Resize
	variable ymax_s=ymax*Resize
	
	
	variable xCenter_s=(xmin_s+xmax_s)/2
	variable yCenter_s=(ymin_s+ymax_s)/2
	
	variable pixelSizeX=FOV/(xmax_s-xmin_s)
	variable pixelSizeY=FOV/(ymax_s-ymin_s)
	
	setscale /P x,-1*xCenter_s*pixelSizeX+Offset_x,pixelSizeX,"Micron (absolute)",ImageWave
	
	setscale /P y,-1*yCenter_s*pixelSizeY+Offset_y,pixelSizeY,"Micron (absolute)",ImageWave

End

Function SLP_FindScreenPos(ImageWaveFName,FOV,threshold,resize)
	string ImageWaveFName
	variable FOV
	variable threshold
	variable resize
	
	string current_folder=getdatafolder(1)
	setdatafolder root:Package_SLP:Stitch:ImgAnalyzeParticles
	NVAR min_ScreenSize=root:Package_SLP:Stitch:ImgAnalyzeParticles:min_ScreenSize
	NVAR FindScreenTh=root:Package_SLP:Stitch:ImgAnalyzeParticles:FindScreenTh
	NVAR new_xMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xMin
	NVAR new_yMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yMin
	NVAR new_xMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xMax
	NVAR new_yMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yMax
	NVAR new_xCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xCenter
	NVAR new_yCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yCenter
	NVAR new_PixelSizeX=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_PixelSizeX
	NVAR new_PixelSizeY=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_PixelSizeY
	
	wave ImageWave=$ImageWaveFName
	min_ScreenSize=dimsize(ImageWave,0)*dimsize(ImageWave,1)*0.4 
	//[NOTE] Minimum screen size should be about 40% of the total no. of pixels (depending on the camera position and recorded pixels). 
	//From current setting (2016.12.09), screen is 55% of the total area
	
	//print "Min Screen Size = "+num2str(min_ScreenSize)
	
	ImageThreshold /Q/I/T=(threshold) ImageWave 
	wave slp_ImageThresh=M_ImageThresh
	
	ImageAnalyzeParticles /E/W/Q/M=3 /A=(min_ScreenSize) /F stats, slp_ImageThresh
	
	wave W_xmin
	wave W_xmax
	wave W_ymin
	wave W_ymax
	
	If (dimsize(W_xmin,0)!=0)
		new_xmin=W_xmin[0]/resize
		new_xmax=W_xmax[0]/resize
		new_ymin=W_ymin[0]/resize
		new_ymax=W_ymax[0]/resize
		new_xCenter=(new_xmin+new_xmax)/2
		new_yCenter=(new_ymin+new_ymax)/2
		new_pixelSizeX=FOV/(new_xmax-new_xmin)
		new_pixelSizeY=FOV/(new_ymax-new_ymin)
	Else
		DoAlert 0,"Threshold value too high!"
	Endif
	
	setdatafolder current_folder
	
End

Function SLP_Save_ImgPos()
	NVAR xMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:xMin
	NVAR yMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:yMin
	NVAR xMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:xMax
	NVAR yMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:yMax
	NVAR xCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:xCenter
	NVAR yCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:yCenter
	NVAR PixelSizeX=root:Package_SLP:Stitch:ImgAnalyzeParticles:PixelSizeX
	NVAR PixelSizeY=root:Package_SLP:Stitch:ImgAnalyzeParticles:PixelSizeY

	NVAR new_xMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xMin
	NVAR new_yMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yMin
	NVAR new_xMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xMax
	NVAR new_yMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yMax
	NVAR new_xCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xCenter
	NVAR new_yCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yCenter
	NVAR new_PixelSizeX=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_PixelSizeX
	NVAR new_PixelSizeY=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_PixelSizeY
	
	xMin=new_xMin
	yMin=new_yMin
	xMax=new_xMax
	yMax=new_yMax
	xCenter=new_xCenter
	yCenter=new_yCenter
	PixelSizeX=new_PixelSizeX
	PixelSizeY=new_PixelSizeY

End

Function SLP_Stitch_Images(Resolution_X,Resolution_Y,Stitch_Name,Intensity_Th,FOV_Adj)
	variable Resolution_X
	variable Resolution_Y
	string Stitch_Name
	variable Intensity_Th
	variable FOV_Adj

	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
	string Mask_FName=Pkg_Location+":SLP_StitchMask"
	
	variable X_min=0
	variable X_max=0
	variable Y_min=0
	variable Y_max=0
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave SLP_ImgParamListSelW=$ImgParamSel_Fname
	wave SLP_Mask=$Mask_FName
	
	variable i=0
	variable FOV_Num=0
	variable FOV_Angle=0
	
	variable Micrometer_x=0
	variable Micrometer_y=0
	string FOV_txt=""
	
	variable X_max_crnt,X_min_crnt,Y_max_crnt,Y_min_crnt
	variable First_Flg=1
	
	//Find the range of the final image
	
	For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
		if (SLP_ImgParamListSelW[i][0]==48)
			
			FOV_txt=SLP_ImgParamListW[i][5]
			FOV_Num=SLP_convertFOV_str2num(FOV_txt)
			FOV_angle=SLP_convertFOV_str2angle(FOV_txt)
			
			Micrometer_x=str2num(SLP_ImgParamListW[i][2])
			Micrometer_y=str2num(SLP_ImgParamListW[i][3])
			
			if (First_Flg==1) //First selected image - min and max X, Y
				X_max=-1000*(Micrometer_x*cos(FOV_Angle)-Micrometer_y*sin(FOV_Angle))+FOV_Num/2*FOV_Adj
				X_min=-1000*(Micrometer_x*cos(FOV_Angle)-Micrometer_y*sin(FOV_Angle))-FOV_Num/2*FOV_Adj
				Y_max=-1000*(Micrometer_x*sin(FOV_Angle)+Micrometer_y*cos(FOV_Angle))+FOV_Num/2*FOV_Adj
				Y_min=-1000*(Micrometer_x*sin(FOV_Angle)+Micrometer_y*cos(FOV_Angle))-FOV_Num/2*FOV_Adj
				First_Flg=0
			Else //Then compare to the next ones - pick one with the most extreme X,Y
				X_max_crnt=-1000*(Micrometer_x*cos(FOV_Angle)-Micrometer_y*sin(FOV_Angle))+FOV_Num/2*FOV_Adj
				X_min_crnt=-1000*(Micrometer_x*cos(FOV_Angle)-Micrometer_y*sin(FOV_Angle))-FOV_Num/2*FOV_Adj
				Y_max_crnt=-1000*(Micrometer_x*sin(FOV_Angle)+Micrometer_y*cos(FOV_Angle))+FOV_Num/2*FOV_Adj
				Y_min_crnt=-1000*(Micrometer_x*sin(FOV_Angle)+Micrometer_y*cos(FOV_Angle))-FOV_Num/2*FOV_Adj
				
				if (X_max_crnt>X_max)
					X_max=X_max_Crnt
				Endif
				
				if (X_min_crnt<X_min)
					X_min=X_min_Crnt
				Endif
				
				if (Y_max_crnt>Y_max)
					Y_max=Y_max_Crnt
				Endif
				
				if (Y_min_crnt<Y_min)
					Y_min=Y_min_Crnt
				Endif
			Endif
		Endif
	Endfor
	
	//print X_max
	//print X_min
	//print Y_max
	//print Y_min
	
	Make /O /N=(Resolution_X,Resolution_Y) $Stitch_Name /WAVE=Stitched_Image
	Setscale /I x X_min,X_max,"Microns (absolute)",Stitched_Image
	Setscale /I y Y_min,Y_max,"Microns (absolute)",Stitched_Image
	
	Stitched_Image=0
	
	//NewImage Stitched_Image
	
	variable j=0
	variable k=0
	variable x_ImageW=0
	variable y_ImageW=0
	string ImageW_FName=""
	variable PixelValue=0
	
	variable xPt_Stitched_Image=0
	variable yPt_Stitched_Image=0
	
	
	
	For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
		if (SLP_ImgParamListSelW[i][0]==48)
			FOV_txt=SLP_ImgParamListW[i][5]
			FOV_Num=SLP_convertFOV_str2num(FOV_txt)
			ImageW_FName=SLP_ImgListW[i][2]+SLP_ImgListW[i][3]
			wave Org_ImageW=$ImageW_FName
			
			Duplicate /O Org_ImageW, ImageW
			ImageW*=SLP_Mask
			
			For (j=0;j<dimsize(ImageW,0);j+=1)
				For (k=0;k<dimsize(ImageW,1);k+=1)
					PixelValue=ImageW[j][k]
					x_ImageW=dimoffset(ImageW,0)+j*dimdelta(ImageW,0)*FOV_Adj-FOV_num/2*(1-FOV_Adj)
					y_ImageW=dimoffset(ImageW,1)+k*dimdelta(ImageW,1)*FOV_Adj-FOV_num/2*(1-FOV_Adj)
					
					xPt_Stitched_Image=round((x_ImageW-DimOffset(Stitched_Image,0))/DimDelta(Stitched_Image,0))
					yPt_Stitched_Image=round((y_ImageW-DimOffset(Stitched_Image,1))/DimDelta(Stitched_Image,1))
					
					//Add the pixel value to the final image (only if the pixel is in the range)
					If (xPt_Stitched_Image>=0 && xPt_Stitched_Image<dimsize(Stitched_Image,0) && yPt_Stitched_Image>=0 && yPt_Stitched_Image<dimsize(Stitched_Image,1))
						//Stitched_Image[xPt_Stitched_Image][yPt_Stitched_Image]=(Stitched_Image[xPt_Stitched_Image][yPt_Stitched_Image]+PixelValue)/2
						If (PixelValue>=Intensity_Th)
							Stitched_Image[xPt_Stitched_Image][yPt_Stitched_Image]=PixelValue
						Endif
						
					Endif
					
				Endfor
			Endfor
			
		endif
	endfor
	Killwaves ImageW
End

Function SLP_SetLEEMScale_Batch(SLP_SetScale_mode)
	variable SLP_SetScale_mode //mode 0 = relative scale, mode 1 = absolute scale (offset by mitutoyo)
	variable micrometer_angle // In Deg (not Rad)
	
	//convert to radian
	//micrometer_angle=micrometer_angle*pi/180

	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave SLP_ImgParamListSelW=$ImgParamSel_Fname
	
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	//wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW

	variable i=0
	string Img_Fname=""
	string FOV_txt=""
	variable FOV_num=0
	variable Resize=0
	variable FOV_angle=0
	
	variable Micrometer_x
	variable Micrometer_y
	
	For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
		if (SLP_ImgParamListSelW[i][0]==48)
			Img_Fname=SLP_ImgListW[i][2]+SLP_ImgListW[i][3]
			
			Resize=str2num(SLP_ImgSetListW[Dataset_Sel][2])
			
			FOV_txt=SLP_ImgParamListW[i][5]
			FOV_num=SLP_convertFOV_str2num(FOV_txt)
			FOV_angle=SLP_convertFOV_str2angle(FOV_txt)
			
			Micrometer_x=str2num(SLP_ImgParamListW[i][2])
			Micrometer_y=str2num(SLP_ImgParamListW[i][3])
			
			//Only change scale if FOV is not in LEED or Disp. Pl. modes
			If (numtype(FOV_num)==0)
				if (SLP_SetScale_mode==0)
					slp_SetLEEMScale_Pixel(Img_Fname,Resize)
				Elseif  (SLP_SetScale_mode==1)
					slp_SetLEEMScale(Img_Fname,FOV_num,Resize)
				Elseif (SLP_SetScale_mode==2)
					slp_SetLEEMScale_Absolute(Img_Fname,FOV_num,Resize,Micrometer_x,Micrometer_y,FOV_angle*pi/180)
				Endif
			Endif
			
		endif
	Endfor

End

Function SLP_convertFOV_str2num(FOV_txt)
	string FOV_txt
	
	wave /T SLP_FOV_table=root:Package_SLP:Stitch:SLP_FOV_table
	
	FindValue /TEXT=FOV_txt SLP_FOV_table
	
	variable FOV_num=str2num(SLP_FOV_table[V_value][1])
	
	return FOV_num

End

Function SLP_convertFOV_str2angle(FOV_txt)
	string FOV_txt
	
	wave /T SLP_FOV_table=root:Package_SLP:Stitch:SLP_FOV_table
	
	FindValue /TEXT=FOV_txt SLP_FOV_table
	
	variable FOV_num=str2num(SLP_FOV_table[V_value][2])
	
	return FOV_num

End

Function SLP_create_Stitch1()
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	string ImgParamSel_Fname=Pkg_Location+":SLP_ImgParamListSelW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave SLP_ImgParamListSelW=$ImgParamSel_Fname

	variable i=0
	
	Display
	
	string Img_Fname=""
	
	For (i=0;i<dimsize(SLP_ImgListW,0);i+=1)
		if (SLP_ImgParamListSelW[i][0]==48)
			Img_Fname=SLP_ImgListW[i][2]+SLP_ImgListW[i][3]
			
			appendImage $Img_Fname
			
		Endif
	Endfor

End

Function Create_SetScale_Panel() : Panel

	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel
	SLP_LL_SetScale_Sel=0
	
	PauseUpdate; Silent 1		// building window...
	DoWindow /K SLP_LL_SetScale
	NewPanel /W=(420,145,670,280) /N=SLP_LL_SetScale
	//ShowTools/A
	SetDrawLayer UserBack
	DrawText 45,35,"Change axis scaling of\r selected image(s) to"
	CheckBox check0,pos={80,40},size={80,15},title="Pixel number",value= 1,mode=1, proc=CheckProc_LL_SetScale_Check0
	CheckBox check1,pos={80,60},size={80,15},title="Relative scale",value= 0,mode=1, proc=CheckProc_LL_SetScale_Check1
	CheckBox check2,pos={80,80},size={80,15},title="Absolute scale",value= 0,mode=1, proc=CheckProc_LL_SetScale_Check2
	Button button0,pos={15,100},size={100,20},title="Change scale", proc=ButtonProc_LL_SetScale_Set
	Button button1,pos={135,100},size={100,20},title="Cancel", proc=ButtonProc_LL_SetScale_Cancel
	
End

Function CheckProc_LL_SetScale_Check0(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			CheckBox check1, value=0
			CheckBox check2, value=0
			SLP_LL_SetScale_Sel=0			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_LL_SetScale_Check1(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			CheckBox check0, value=0
			CheckBox check2, value=0	
			SLP_LL_SetScale_Sel=1		
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_LL_SetScale_Check2(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			CheckBox check0, value=0
			CheckBox check1, value=0
			SLP_LL_SetScale_Sel=2		
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function ButtonProc_LL_SetScale_Cancel(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K SLP_LL_SetScale
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_LL_SetScale_Set(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K SLP_LL_SetScale
			
			SLP_SetLEEMScale_Batch(SLP_LL_SetScale_Sel) //need angle here [TODO]
			
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_LL_DrawROI(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			//Dowindow /F /W=Stitch_Panel_01 Stitch_Mask_PLOT //DoWindows cannot understand subWindow syntax!
			SetActiveSubwindow Stitch_Panel_01#Stitch_Mask_Plot
			showtools /A rect
			TitleBox title0 title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {10,220},frame=0
			SetDrawLayer ProgFront
			//SetDrawEnv linefgc= (65535,65535,0),fillpat= 0,xcoord= top,ycoord= left, save
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_LL_CreateStitchMask(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	NVAR SLP_LL_SetScale_Sel=root:Package_SLP:Stitch:SLP_LL_SetScale_Sel
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SetActiveSubwindow Stitch_Panel_01#Stitch_Mask_Plot
			ImageGenerateROIMask /E=0 /I=1 SLP_DispStitchMask
			TitleBox title0 disable=1
			
			SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
			string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet		
			string ScreenMaskW_FName=Pkg_Location+":SLP_ScreenMask"
			string StitchMaskW_FName=Pkg_Location+":SLP_StitchMask"
			string DispStitchMaskW_FName=Pkg_Location+":SLP_DispStitchMask"
			wave ScreenMask=$ScreenMaskW_FName
			wave StitchMask=$StitchMaskW_FName
			wave DispStitchMask=$DispStitchMaskW_FName
			//duplicate /O ScreenMask, $StitchMaskW_FName /WAVE=StitchMask
			
			If(Exists("M_ROIMask"))
				Wave M_ROIMask
				string new_M_ROIMask_FName=Pkg_Location+":M_ROIMask"
				duplicate /O M_ROIMask, $new_M_ROIMask_FName
				StitchMask=M_ROIMask*StitchMask
				DispStitchMask=StitchMask*DispStitchMask
				killwaves M_ROIMask
			Endif
			DrawAction delete
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_Reset_StitchMask()
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	SVAR CurrentImageName=root:Package_SLP:LoadLEEM:CurrentImageName
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet		
	string ScreenMaskW_FName=Pkg_Location+":SLP_ScreenMask"
	string StitchMaskW_FName=Pkg_Location+":SLP_StitchMask"
	string DispStitchMaskW_FName=Pkg_Location+":SLP_DispStitchMask"
	
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	string ImgListW_FName=Pkg_Location+":SLP_ImgListW"
	wave /T ImgListW=$ImgListW_FName
	string CurrentImage_FName=ImgListW[LoadLEEM_Sel][2]+ImgListW[LoadLEEM_Sel][3]
	
	wave ScreenMask=$ScreenMaskW_FName
	wave StitchMask=$StitchMaskW_FName
	wave DispStitchMask=$DispStitchMaskW_FName
	wave CrntImgW=$CurrentImage_FName
	StitchMask=ScreenMask
	DispStitchMask=StitchMask*CrntImgW
End

Function SLP_Create_Stitch_Panel1()
	Dowindow /K Stitch_Panel_01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(355,225,840,475) /N=Stitch_Panel_01
	SetDrawLayer UserBack
	//DrawRect 17,29,196,191
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	SVAR CurrentImageName=root:Package_SLP:LoadLEEM:CurrentImageName
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet		
	string ScreenMaskW_FName=Pkg_Location+":SLP_ScreenMask"
	string StitchMaskW_FName=Pkg_Location+":SLP_StitchMask"
	
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	string ImgListW_FName=Pkg_Location+":SLP_ImgListW"
	wave /T ImgListW=$ImgListW_FName
	string CurrentImage_FName=ImgListW[LoadLEEM_Sel][2]+ImgListW[LoadLEEM_Sel][3]
	
	string DispStitchMask_FName=Pkg_Location+":SLP_DispStitchMask"
	wave ScreenMask=$ScreenMaskW_FName
	if (!waveexists($StitchMaskW_FName))
		duplicate /O ScreenMask, $StitchMaskW_FName /WAVE=StitchMask
		duplicate /O ScreenMask, M_ROIMask
		M_ROIMask=1
	Else
		wave StitchMask=$StitchMaskW_FName
	EndIf
	//NewImage $CurrentImage_FName
	duplicate /O $CurrentImage_FName,$DispStitchMask_FName /WAVE=DispStitchMask
	DispStitchMask=DispStitchMask*StitchMask
	Display /HOST=Stitch_Panel_01 /W=(15,30,210,190) /N=Stitch_Mask_Plot
	AppendImage /W=Stitch_Panel_01#Stitch_Mask_Plot $DispStitchMask_FName
	ModifyGraph margin=6,tick=3,noLabel=2, standoff=0
	SetAxis /A/R left
	string ImageName=stringfromlist(0,ImageNameList("Stitch_Panel_01#Stitch_Mask_Plot",";"))
	ModifyImage $ImageName  ctab= {*,*,Terrain,0}
	
	DrawText 11,26,"Stitch selected images"
	DrawText 17,26,"Mask"
	
	Button button0,pos={340,220},size={50,20},title="Stitch",proc=ButtonProc_LL_Stitch_Run
	Button button1,pos={400,220},size={50,20},title="Cancel",proc=ButtonProc_LL_Stitch_Cancel
	Button button2,pos={15,195},size={80,20},title="Draw ROI",proc=ButtonProc_LL_DrawROI
	Button button3,pos={100,195},size={100,20},title="Create mask",proc=ButtonProc_LL_CreateStitchMask
	Button button4,pos={210,195},size={150,20},title="Reset to screen mask",proc=ButtonProc_ResetStitchMask
	
	SetVariable setvar0,pos={230,130},size={150,15},title="Angle adjustment", value=root:Package_SLP:Stitch:SLP_Stitch_AngleAdj
	SetVariable setvar1,pos={230,150},size={150,15},title="FOV adjustment" ,value=root:Package_SLP:Stitch:SLP_Stitch_FOVAdj
	SetVariable setvar2,pos={230,80},size={100,15},title="X resolution" ,value=root:Package_SLP:Stitch:SLP_Stitch_XRes
	SetVariable setvar2,limits={-inf,inf,0}
	SetVariable setvar3,pos={350,80},size={100,15},title="Y resolution" ,value=root:Package_SLP:Stitch:SLP_Stitch_YRes
	SetVariable setvar3,limits={-inf,inf,0}
	SetVariable setvar4,pos={230,110},size={150,15},title="Threshold value", value=root:Package_SLP:Stitch:SLP_Stitch_Threshold
	SetVariable setvar5,pos={230,30},size={250,15},title="Image wave name", value=root:Package_SLP:Stitch:SLP_Stitch_ImWName
	
	CheckBox check0,pos={230,170},size={88,15},title="Realtime update",value= 0
	CheckBox check1,pos={390,50},size={60,15},title="Overwrite",value= 0
	
		
	
End

Function ButtonProc_ResetStitchMask(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_Reset_StitchMask()			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_LL_Stitch_Run(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	NVAR SLP_Stitch_XRes=root:Package_SLP:Stitch:SLP_Stitch_XRes
	NVAR SLP_Stitch_YRes=root:Package_SLP:Stitch:SLP_Stitch_YRes
	NVAR SLP_Stitch_Threshold=root:Package_SLP:Stitch:SLP_Stitch_Threshold
	SVAR SLP_Stitch_ImWName=root:Package_SLP:Stitch:SLP_Stitch_ImWName
	NVAR SLP_Stitch_FOVAdj=root:Package_SLP:Stitch:SLP_Stitch_FOVAdj
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_Stitch_Images(SLP_Stitch_XRes,SLP_Stitch_YRes,SLP_Stitch_ImWName,SLP_Stitch_Threshold,SLP_Stitch_FOVAdj)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_Create_FindScreenPanel() : Panel
	
	SVAR ImgWName=root:Package_SLP:Stitch:ImgAnalyzeParticles:ImgWName
	NVAR min_ScreenSize=root:Package_SLP:Stitch:ImgAnalyzeParticles:min_ScreenSize
	NVAR FindScreenTh=root:Package_SLP:Stitch:ImgAnalyzeParticles:FindScreenTh
	NVAR xMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:xMin
	NVAR yMin=root:Package_SLP:Stitch:ImgAnalyzeParticles:yMin
	NVAR xMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:xMax
	NVAR yMax=root:Package_SLP:Stitch:ImgAnalyzeParticles:yMax
	NVAR xCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:xCenter
	NVAR yCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:yCenter
	NVAR PixelSizeX=root:Package_SLP:Stitch:ImgAnalyzeParticles:PixelSizeX
	NVAR PixelSizeY=root:Package_SLP:Stitch:ImgAnalyzeParticles:PixelSizeY
	
	NVAR new_xCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xCenter
	NVAR new_yCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yCenter
	
	Dowindow /K Find_Screen_Panel_01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(275,171,885,419) /N=Find_Screen_Panel_01
	//ShowTools/A
	SetDrawLayer UserBack
	DrawText 480,60,"\Z10Saved screen position"
	DrawText 360,60,"\Z10New screen position"
	SetDrawEnv fsize= 14
	DrawText 9,25,"Find screen position"
	DrawText 16,45,"Threshold"
	DrawText 184,45,"Screen area"
	
	SetVariable SetVar_ImgWName,pos={200,5},size={300,15},title="Image wave name", value=ImgWName,disable=2
	SetVariable setvar0,pos={12,197},size={155,15},title="Threshold", value=FindScreenTh, limits={0,inf,1},proc=SetVarProc_ChangeTh
	SetVariable setvar1,pos={173,196},size={182,15},title="Min screen size (pixels)", value=min_ScreenSize, limits={0,inf,0},disable=2,ValueColor=(0,0,0)
	Button button0,pos={135,220},size={170,20},title="Change screen position",proc=ButtonProc_LL_SaveImgPos
	Button button1,pos={310,220},size={200,20},title="Create screen mask",proc=ButtonProc_CreateScreenMask
	Button button2,pos={520,220},size={60,20},title="Done",proc=ButtonProc_LL_FindScreen_Done
	SetVariable setvar2,pos={500,66},size={83,15},noedit=1,title="X center"
	SetVariable setvar2,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:xCenter
	SetVariable setvar3,pos={500,84},size={83,15},noedit=1,title="Y center"
	SetVariable setvar3,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:yCenter
	SetVariable setvar4,pos={500,104},size={83,15},noedit=1,title="X min"
	SetVariable setvar4,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:xmin
	SetVariable setvar5,pos={500,122},size={83,15},noedit=1,title="Y min"
	SetVariable setvar5,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:ymin
	SetVariable setvar6,pos={500,146},size={83,15},noedit=1,title="X max"
	SetVariable setvar6,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:xmax
	SetVariable setvar7,pos={500,164},size={83,15},noedit=1,title="Y max"
	SetVariable setvar7,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:ymax
	SetVariable setvar8,pos={370,66},size={83,15},noedit=0,title="X center",proc=SetVarProc_New_xyCenter
	SetVariable setvar8,limits={-inf,inf,1},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xCenter
	SetVariable setvar9,pos={370,84},size={83,15},noedit=0,title="Y center",proc=SetVarProc_New_xyCenter
	SetVariable setvar9,limits={-inf,inf,1},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yCenter
	SetVariable setvar05,pos={370,104},size={83,15},noedit=1,title="X min"
	SetVariable setvar05,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xmin
	SetVariable setvar06,pos={370,122},size={83,15},noedit=1,title="Y min"
	SetVariable setvar06,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:new_ymin
	SetVariable setvar07,pos={370,146},size={83,15},noedit=1,title="X max"
	SetVariable setvar07,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xmax
	SetVariable setvar08,pos={370,164},size={83,15},noedit=1,title="Y max"
	SetVariable setvar08,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:new_ymax
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	string ImageWaveFName=SLP_ImgListW[LoadLEEM_Sel][2]+SLP_ImgListW[LoadLEEM_Sel][3]
	ImgWName=SLP_ImgListW[LoadLEEM_Sel][3]
	variable resize=str2num(SLP_ImgSetListW[Dataset_Sel][2])
	variable FOV=SLP_convertFOV_str2num(SLP_ImgParamListW[LoadLEEM_Sel][5])
	
	slp_FindScreenPos(ImageWaveFName,FOV,FindScreenTh,resize)
	
	wave M_ImageThresh=root:Package_SLP:Stitch:ImgAnalyzeParticles:M_ImageThresh
	
	Display /HOST=Find_Screen_Panel_01 /N=FindScreen_ImgTh /W=(10,55,170,180) 
	Appendimage /W=Find_Screen_Panel_01#FindScreen_ImgTh M_ImageThresh
	ModifyGraph margin=6,tick=3,noLabel=2, standoff=0
	SetAxis /A/R left
	
	
	Display /HOST=Find_Screen_Panel_01 /N=FindScreen_Img /W=(180,55,340,180) 
	Appendimage /W=Find_Screen_Panel_01#FindScreen_Img $ImageWaveFName
	Appendtograph /W=Find_Screen_Panel_01#FindScreen_Img root:Package_SLP:Stitch:ImgAnalyzeParticles:W_BoundaryY vs root:Package_SLP:Stitch:ImgAnalyzeParticles:W_BoundaryX
	ModifyGraph margin=6,tick=3,noLabel=2, standoff=0
	SetAxis /A/R left
	
	SLP_FindScreen_DrawC()
	
End

Function SLP_FindScreen_DrawC()
	NVAR new_xCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_xCenter
	NVAR new_yCenter=root:Package_SLP:Stitch:ImgAnalyzeParticles:new_yCenter
	
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	
	string ImageWaveFName=SLP_ImgListW[LoadLEEM_Sel][2]+SLP_ImgListW[LoadLEEM_Sel][3]
	wave ImgWave=$ImageWaveFName
	
	variable Range_X=abs( dimoffset(ImgWave,0)+dimdelta(ImgWave,0)*(dimsize(ImgWave,0)-1))
	variable Range_Y= abs(dimoffset(ImgWave,1)+dimdelta(ImgWave,1)*(dimsize(ImgWave,1)-1))
	
	//print Range_X
	//print Range_Y
	
	if (stringmatch(Waveunits(ImgWave,0),"")||stringmatch(Waveunits(ImgWave,0),"Pixel"))
		
		Setdrawlayer /W=Find_Screen_Panel_01#FindScreen_Img UserFront	
		DrawAction /W=Find_Screen_Panel_01#FindScreen_Img delete
		SetDrawEnv /W=Find_Screen_Panel_01#FindScreen_Img xcoord=rel,ycoord=rel,lineFgc=(65535,0,0)
		Drawline /W=Find_Screen_Panel_01#FindScreen_Img abs(new_xCenter/Range_X),0,abs(new_xCenter/Range_X),1
		SetDrawEnv /W=Find_Screen_Panel_01#FindScreen_Img xcoord=rel, ycoord=rel,lineFgc=(65535,0,0)
		Drawline /W=Find_Screen_Panel_01#FindScreen_Img 0,abs(new_yCenter/Range_Y),1,abs(new_yCenter/Range_Y)
		
	Endif
End

Function SLP_FindScreen_ChangeTh()
	
	SVAR ImgWName=root:Package_SLP:Stitch:ImgAnalyzeParticles:ImgWName
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR min_ScreenSize=root:Package_SLP:Stitch:ImgAnalyzeParticles:min_ScreenSize
	NVAR FindScreenTh=root:Package_SLP:Stitch:ImgAnalyzeParticles:FindScreenTh
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	wave /T SLP_ImgListW=$ImgList_Fname
	wave /T SLP_ImgParamListW=$ImgParam_Fname
	wave /T SLP_ImgSetListW=root:Package_SLP:LoadLEEM:SLP_ImgSetListW
	wave SLP_ImgSetListSelW=root:Package_SLP:LoadLEEM:SLP_ImgSetListSelW
	
	NVAR LoadLEEM_Sel=root:Package_SLP:LoadLEEM:LoadLEEM_Sel
	NVAR Dataset_Sel=root:Package_SLP:LoadLEEM:Dataset_Sel
	
	string ImageWaveFName=SLP_ImgListW[LoadLEEM_Sel][2]+SLP_ImgListW[LoadLEEM_Sel][3]
	ImgWName=SLP_ImgListW[LoadLEEM_Sel][3]
	variable resize=str2num(SLP_ImgSetListW[Dataset_Sel][2])
	variable FOV=SLP_convertFOV_str2num(SLP_ImgParamListW[LoadLEEM_Sel][5])
	
	slp_FindScreenPos(ImageWaveFName,FOV,FindScreenTh,resize)
	
	
End

Function SLP_Create_ScreenMask()
	wave M_Particle=root:Package_SLP:Stitch:ImgAnalyzeParticles:M_Particle
	
	SVAR ImgWName=root:Package_SLP:Stitch:ImgAnalyzeParticles:ImgWName
	SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
	NVAR min_ScreenSize=root:Package_SLP:Stitch:ImgAnalyzeParticles:min_ScreenSize
	NVAR FindScreenTh=root:Package_SLP:Stitch:ImgAnalyzeParticles:FindScreenTh
	
	string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
	string ImgList_Fname=Pkg_Location+":SLP_ImgListW"
	string ImgParam_Fname=Pkg_Location+":SLP_ImgParamListW"
	
	string ScreenMaskWaveFName=Pkg_Location+":SLP_ScreenMask"
	
	duplicate /O M_Particle,$ScreenMaskWaveFName /WAVE=ScreenMaskW
	
	//Change from 64/16 (values used in ImageAnalyzeParticle function of Igor) to 0/1 (0 = outside the screen, 1 = inside the screen)
	ScreenMaskW-=64
	ScreenMaskW/=208

End

Function ButtonProc_CreateScreenMask(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_Create_ScreenMask()
						
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_LL_FindScreen_Done(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Dowindow /K Find_Screen_Panel_01
						
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_LL_SaveImgPos(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_Save_ImgPos()
						
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_ImgNotes(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR LoadLEEM_sel=root:Package_SLP:LoadLEEM:LoadLEEM_sel
			SVAR CurrentDataSet=root:Package_SLP:LoadLEEM:CurrentDataSet
			string Pkg_Location="root:Package_SLP:LoadLEEM:"+CurrentDataSet
			string ImgParamList_Fname=Pkg_Location+":SLP_ImgParamListW"
			wave /T SLP_ImgParamListW=$ImgParamList_Fname
			SLP_ImgParamListW[LoadLEEM_sel][13]=sval
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_ChangeTh(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			SLP_FindScreen_ChangeTh()
			SLP_FindScreen_DrawC()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_New_xyCenter(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			SLP_FindScreen_DrawC()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


// ver. ce20161230b
//	- Add BG loading and processing using BG

// ver. ce20161223a
//	- Recipe items allow parameter changes (where applied)

//ver. ce20161222a
//	- Add Processed data functionality. Can plot the processed data

//ver. ce20161220e
//	- Cosmetic change
//	- Small bug fixed - ROI_sel_List global string missing

//ver. ce20161220d
//	- Option to copy data and plot to a new window ([Note] X-wave is not copied. Also the wave names are exactly the same as originals - wave name limitation of Igor)


//ver. ce20161220c
//	- Multiple scans to be displayed in the 3rd graph column too.

//ver. ce20161220b
//	- Multiple scans can be displayed together in the 2nd graph column
//	- Gradiant applied (still quite bad)

//ver. ce20161219c
// - Check the validity of ROI selections. Change selection to 1 if user input wrong number
// - Select all ROI by default

//ver. ce20161219b
// - With user's interface (not fully finished)
//		- Display selected scans
//		- User can select which ROI(s) to display

//Ver. ce20161217a
// - Auto-normalize the NEXAFS w/ I0 when loading.

//Ver. ce20161216a
// - Load batch with auto-checking for new scans




 Function SLP_NEX_DeleteScan()
	ControlInfo /W=SLP_NEX_Panel_01 List0
	Variable SelRow=V_Value
	wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	wave SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	//wave /T SLP_NEX_ScanParamListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanParamListW
	String ScanName=SLP_NEX_ScanListW[SelRow][3]
	String PromptStr="Are you sure that you want to delete: "+ScanName
	Variable FinalRowSelect
	Doalert 1,PromptStr
	If (V_flag==1) //If 'Confirm'
		If (dimsize(SLP_NEX_ScanListW,0)==1)
			//If this is the last data
			SLP_Util_RemoveAllTraces("SLP_NEX_Panel_01#SLP_NEX_Graph00")
			SLP_Util_RemoveAllTraces("SLP_NEX_Panel_01#SLP_NEX_Graph10")
			SLP_Util_RemoveAllTraces("SLP_NEX_Panel_01#SLP_NEX_Graph20")
			FinalRowSelect=-1
		ElseIf(SelRow<dimsize(SLP_NEX_ScanListW,0)-1)
			//If the row to delete is not the bottom one - Select the next one
			SLP_NEX_PlotScan(SelRow+1)
			FinalRowSelect=SelRow
		Elseif (SelRow==dimsize(SLP_NEX_ScanListW,0)-1) //If the last image is to be deleted
			//If the row to delete is the bottom one - Select the row just above
			SLP_NEX_PlotScan(SelRow-1)
			FinalRowSelect=SelRow-1
		Endif
		
		SLP_NEX_ScanDisplaySelListW[SelRow][3]=32
		SLP_NEX_ScanDisplaySelListW[SelRow][4]=32
		SLP_NEX_PlotScanP1()
		
		String DataFolder_FName=SLP_NEX_ScanListW[SelRow][2]
		killDataFolder /Z $DataFolder_FName
		variable DeleteScanError_Flg=V_Flag
		
		if (DeleteScanError_Flg==0) 
			//Only update ScanListW if Image folder can be deleted
			DeletePoints SelRow,1, SLP_NEX_ScanDisplayListW
			DeletePoints SelRow,1, SLP_NEX_ScanDisplaySelListW
			DeletePoints SelRow,1, SLP_NEX_ScanListW
			//DeletePoints SelRow,1, SLP_NEX_ScanParamListW
		Endif
	Endif
	
	ListBox List0, SelRow=FinalRowSelect,win=SLP_NEX_Panel_01
	
	Return DeleteScanError_Flg
End


Function SLP_NEX_LoadSingle(FileFPath,Prompt_Flg)
	string FileFPath //Full path to the NEXAFS .txt data. If the path is "", then it will ask to choose a folder.
	variable Prompt_Flg
	Variable ContinueLoading_Flg=1
	Variable SLP_FileRef
	
	String CurrentFolder=getdatafolder(1)
	
	//If "", then ask to choose the .txt file.
	If (stringmatch(FileFPath,""))
		open /D/R SLP_FileRef
		If (stringmatch(S_fileName,"")) //If users cancel
			ContinueLoading_Flg=0
		Else
			FileFPath=S_fileName
		EndIf
	EndIf
	
	If (ContinueLoading_Flg)
		String FileName=stringfromlist(itemsinlist(FileFPath,":")-1,FileFPath,":")
		String RemoveString=":"+FileName
		String FileLocation=RemoveEnding(FileFPath,RemoveString)
		String New_WaveName=StringFromList(0,FileName,".") //NAME of the folder.
		Variable exit_flg=0
		
		//Check for duplicate or illegal name
		SetDataFolder root:Package_SLP:NEXAFS
		
		If (Prompt_Flg)
			New_WaveName=CleanUpName(New_WaveName,0)
			Prompt New_WaveName,"Scan name"
			DoPrompt "Enter scan name",New_WaveName
		EndIf
		
		Do
			If (!SLP_Util_CheckLegalName(New_WaveName)||CheckName(New_WaveName,11))
				doalert 1,"Illegal or duplicated scan name. Do you want to choose a new scan name?"
				if (V_flag==2)
					Return 0
				Else
					New_WaveName=CleanUpName(New_WaveName,0)
					Prompt New_WaveName,"Scan name"
					DoPrompt "Enter scan name",New_WaveName
				EndIf
			Else
				exit_flg=1
			EndIf
		While (!exit_flg)
		
		SetDataFolder $CurrentFolder
		
		SLP_NEX_LoadScan(FileLocation,FileName,New_WaveName)
		SLP_NEX_PlotScan(dimsize(root:Package_SLP:NEXAFS:SLP_NEX_ScanListW,0)-1)
		ListBox List0,win=SLP_NEX_Panel_01,SelRow=dimsize(root:Package_SLP:NEXAFS:SLP_NEX_ScanListW,0)-1
	EndIf
End

Function SLP_NEX_BatchExport()

	Wave SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	Variable i=0
	
	For (i=0;i<dimsize(SLP_NEX_ScanDisplaySelListW,0);i+=1)
		If (SLP_NEX_ScanDisplaySelListW[i][7]==48)
			SLP_NEX_PlotScan(i)
			SLP_NEX_ExportData(i)
		EndIf
	EndFor
End



Function SLP_NEX_SendtoFit()
	
	Variable i=0
	Variable j=0
	Wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	Wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	Wave SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	String ROI_InputStr
	String ProcW_FName
	//Global string to pass the result to other functions
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	
	For (i=0;i<dimsize(SLP_NEX_ScanDisplayListW,0);i+=1)
		If (SLP_NEX_ScanDisplaySelListW[i][5]==48)
			//Read ROI selection
			ROI_InputStr=SLP_NEX_ScanDisplayListW[i][2]
			SLP_NEX_intrpt_ROIs(ROI_InputStr)
			For (j=0;j<itemsinlist(ROI_sel_List,";");j+=1)
				ProcW_FName=SLP_NEX_ScanListW[i][2]+":"+SLP_NEX_ScanListW[i][3]+"_ROI"+stringfromlist(j,ROI_sel_List,";")+"_prc"
				SLP_MGFit_AddDataW(ProcW_FName,0)
			EndFor
		EndIf
	EndFor

End



Function SLP_NEX_CreateModRecipePanel() : Panel
	
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	wave /T SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
	wave /T SLP_NEX_AllRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_AllRecipeItemsW
	wave /T SLP_NEX_SelRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_SelRecipeItemsW
	wave /T SLP_NEX_UnselRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_UnselRecipeItemsW
	
	String W_Location=SLP_NEX_ScanListW[NEX_Scan_Sel][2]
	String ScanW_Name=SLP_NEX_ScanListW[NEX_Scan_Sel][3]
	String ScanW_FName=W_Location+":"+ScanW_Name
	String Recipe_FName=W_Location+":"+ScanW_Name+"_rcp"
	
	Wave /T RecipeW=$Recipe_FName //Wave reference for scan recipe (each recipe for each scan)
	Wave SLP_NEX_RecipeSelW=root:Package_SLP:NEXAFS:SLP_NEX_RecipeSelW
	
	SLP_NEX_SelRecipeItemsW=RecipeW //Copy recipe wave to selected-items wave
	SLP_NEX_UnselRecipeItemsW=""
	//Create wave of Unselected recipe items
	variable i=0
	variable j=0
	string Src_Txt=""
	
	For (i=0;i<dimsize(SLP_NEX_AllRecipeItemsW,0);i+=1)
		Src_Txt=SLP_NEX_AllRecipeItemsW[i][0]
		FindValue /TEXT=Src_Txt SLP_NEX_SelRecipeItemsW
		 //All items - selected items = unselected items
		If (V_Value==-1)
			SLP_NEX_UnselRecipeItemsW[j][0]=Src_Txt
			SLP_NEX_UnselRecipeItemsW[j][1]=SLP_NEX_AllRecipeItemsW[i][1] //Copy parameters
			j+=1
		Endif
	EndFor
	//
	
	DoWindow /K Modify_Recipe_Panel
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(166,69,833,438) /N=Modify_Recipe_Panel

	SetDrawLayer UserBack
	SetDrawEnv fsize= 14
	DrawText 16,26,"Modify recipe"
	DrawText 16,46,"Action list"
	
	ListBox list_ActionList,pos={17,47},size={246,262},ListWave=SLP_NEX_UnselRecipeItemsW
	ListBox list_ActionList,mode=2,userColumnResize=1,widths={150,50}
	
	ListBox list_Recipe,pos={342,46},size={309,264},ListWave=SLP_NEX_SelRecipeItemsW
	ListBox list_Recipe,mode=2,selwave=SLP_NEX_RecipeSelW,userColumnResize=1,widths={150,50}
	
	Button B_Cancel,pos={601,341},size={50,20},title="Cancel", proc=ButtonProc_NEX_Recipe_done
	Button B_SaveRecipe,pos={319,341},size={120,20},title="Save recipe",proc=ButtonProc_NEX_Recipe_Save
	Button B_Insert,pos={277,86},size={50,20},title=">>",proc=ButtonProc_NEX_Recipe_Add
	Button B_Remove,pos={277,110},size={50,20},title="<<",proc=ButtonProc_NEX_Recipe_Remove
	Button B_MoveUp,pos={339,313},size={150,20},fSize=10,title="Move selected item up",proc=ButtonProc_NEX_Recipe_MoveUp
	Button B_MoveDown,pos={496,314},size={150,20},fSize=10,title="Move selected item down",proc=ButtonProc_NEX_Recipe_MoveDown
	Button B_SetDefault,pos={445,340},size={150,20},title="Set as default recipe",proc=ButtonProc_NEX_Recipe_SaveDef
	
	SetVariable setvar_RecipeName,pos={344,23},size={300,19},title="Recipe name: ",fSize=12,limits={-inf,inf,0}
	
End

Function SLP_NEX_Recipe_CreateSelWave(current_RecipeW_FName)
	string current_RecipeW_FName
	wave /T Current_RecipeW=$current_RecipeW_FName
	wave SLP_NEX_RecipeSelW=root:Package_SLP:NEXAFS:SLP_NEX_RecipeSelW
	
	variable i=0
	string Item_txt=""
	For (i=0;i<16;i+=1)
		Item_txt=Current_RecipeW[i][0]
		If (whichlistitem(Item_txt, "Normalise by I\B0;Subtract with BG;Normalise BG by I\B0;Divide with BG")!=-1||stringmatch(Item_txt,""))
			SLP_NEX_RecipeSelW[i][1]=0 //non-editable (no parameter required)
		Else
			SLP_NEX_RecipeSelW[i][1]=2 //editable cell 
		Endif
	EndFor
End

Function ButtonProc_NEX_Recipe_Save(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	wave /T SLP_NEX_SelRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_SelRecipeItemsW
	
	String W_Location=SLP_NEX_ScanListW[NEX_Scan_Sel][2]
	String ScanW_Name=SLP_NEX_ScanListW[NEX_Scan_Sel][3]
	String ScanW_FName=W_Location+":"+ScanW_Name
	String Recipe_FName=W_Location+":"+ScanW_Name+"_rcp"
	Wave /T RecipeW=$Recipe_FName //Wave reference for scan recipe (each recipe for each scan)
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			RecipeW=SLP_NEX_SelRecipeItemsW
			DoWindow /K Modify_Recipe_Panel
			SLP_NEX_ProcessScan(NEX_Scan_Sel)
			SLP_NEX_Recipe_CreateSelWave(Recipe_FName)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_SaveDef(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	wave /T SLP_NEX_SelRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_SelRecipeItemsW
	wave /T SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoAlert 1,"Overwrite current default recipe?"
			If (V_Flag==1)
				SLP_NEX_DefaultRecipeW=SLP_NEX_SelRecipeItemsW
				//DoWindow /K Modify_Recipe_Panel
			Endif
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_LoadDef(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	

	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
			wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
			wave /T SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
			
			String W_Location=SLP_NEX_ScanListW[NEX_Scan_Sel][2]
			String ScanW_Name=SLP_NEX_ScanListW[NEX_Scan_Sel][3]
			String ScanW_FName=W_Location+":"+ScanW_Name
			String Recipe_FName=W_Location+":"+ScanW_Name+"_rcp"
			Wave /T RecipeW=$Recipe_FName //Wave reference for scan recipe (each recipe for each scan)
			RecipeW=SLP_NEX_DefaultRecipeW
			SLP_NEX_Recipe_CreateSelWave("root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW")
			SLP_NEX_ProcessScan(NEX_Scan_Sel)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_NEX_ModRcp(ModRcp_Action)
	string ModRcp_Action
	
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	wave /T SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
	wave /T SLP_NEX_AllRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_AllRecipeItemsW
	wave /T SLP_NEX_SelRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_SelRecipeItemsW
	wave /T SLP_NEX_UnselRecipeItemsW=root:Package_SLP:NEXAFS:SLP_NEX_UnselRecipeItemsW
	
	String W_Location=SLP_NEX_ScanListW[NEX_Scan_Sel][2]
	String ScanW_Name=SLP_NEX_ScanListW[NEX_Scan_Sel][3]
	String ScanW_FName=W_Location+":"+ScanW_Name
	String Recipe_FName=W_Location+":"+ScanW_Name+"_rcp"
	Wave /T RecipeW=$Recipe_FName //Wave reference for scan recipe (each recipe for each scan)
	
	Wave SLP_NEX_RecipeSelW=root:Package_SLP:NEXAFS:SLP_NEX_RecipeSelW
	
	variable Left_Sel=0
	variable Right_Sel=0
	string Swap_Str
	
	ControlInfo /W=Modify_Recipe_Panel list_ActionList
	Left_Sel=V_Value
	ControlInfo /W=Modify_Recipe_Panel list_Recipe
	Right_Sel=V_Value
	
	//variable N_Unsel_actions=0
	//variable N_Rcp_actions=0
	
	//Find no. of items in each list
	
	
	StrSwitch (ModRcp_Action)
		
		case "Add":
			InsertPoints Right_Sel+1,1,SLP_NEX_SelRecipeItemsW
			SLP_NEX_SelRecipeItemsW[Right_Sel+1][0]=SLP_NEX_UnselRecipeItemsW[Left_Sel][0]
			SLP_NEX_SelRecipeItemsW[Right_Sel+1][1]=SLP_NEX_UnselRecipeItemsW[Left_Sel][1]
			DeletePoints 16,1,SLP_NEX_SelRecipeItemsW
			DeletePoints Left_Sel,1,SLP_NEX_UnselRecipeItemsW
			InsertPoints 15,1,SLP_NEX_UnselRecipeItemsW
			ListBox list_Recipe,SelRow=Right_Sel+1
			Break
			
		case "Remove":
			InsertPoints Left_Sel+1,1,SLP_NEX_UnselRecipeItemsW
			SLP_NEX_UnselRecipeItemsW[Left_Sel+1][0]=SLP_NEX_SelRecipeItemsW[Right_Sel][0]
			SLP_NEX_UnselRecipeItemsW[Left_Sel+1][1]=SLP_NEX_SelRecipeItemsW[Right_Sel][1]
			DeletePoints 16,1,SLP_NEX_UnselRecipeItemsW
			DeletePoints Right_Sel,1,SLP_NEX_SelRecipeItemsW
			InsertPoints 15,1,SLP_NEX_SelRecipeItemsW
			ListBox list_ActionList,SelRow=Left_Sel+1
			Break
			
		case "MoveUp":
			Swap_Str=SLP_NEX_SelRecipeItemsW[Right_Sel-1][0]
			SLP_NEX_SelRecipeItemsW[Right_Sel-1][0]=SLP_NEX_SelRecipeItemsW[Right_Sel][0]
			SLP_NEX_SelRecipeItemsW[Right_Sel][0]=Swap_Str
			
			Swap_Str=SLP_NEX_SelRecipeItemsW[Right_Sel-1][1]
			SLP_NEX_SelRecipeItemsW[Right_Sel-1][1]=SLP_NEX_SelRecipeItemsW[Right_Sel][1]
			SLP_NEX_SelRecipeItemsW[Right_Sel][1]=Swap_Str
			
			ListBox list_Recipe,SelRow=Right_Sel-1
			Break
		
		case "MoveDown":
			Swap_Str=SLP_NEX_SelRecipeItemsW[Right_Sel+1][0]
			SLP_NEX_SelRecipeItemsW[Right_Sel+1][0]=SLP_NEX_SelRecipeItemsW[Right_Sel][0]
			SLP_NEX_SelRecipeItemsW[Right_Sel][0]=Swap_Str
			
			Swap_Str=SLP_NEX_SelRecipeItemsW[Right_Sel+1][1]
			SLP_NEX_SelRecipeItemsW[Right_Sel+1][1]=SLP_NEX_SelRecipeItemsW[Right_Sel][1]
			SLP_NEX_SelRecipeItemsW[Right_Sel][1]=Swap_Str
			
			ListBox list_Recipe,SelRow=Right_Sel+1
			
			Break
			
	EndSwitch
	
	SLP_NEX_Recipe_CreateSelWave("root:Package_SLP:NEXAFS:SLP_NEX_SelRecipeItemsW")
End

Function SLP_NEX_ExportData(SelRow)
	Variable SelRow

	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	
	SVAR GraphSel=root:Package_SLP:NEXAFS:Export:GraphSel
	SVAR WindowSel=root:Package_SLP:NEXAFS:Export:WindowSel
	SVAR ExpType=root:Package_SLP:NEXAFS:Export:ExpType
	NVAR ImgDispFlg=root:Package_SLP:NEXAFS:Export:ImgDispFlg
	NVAR ROIsDispFlg=root:Package_SLP:NEXAFS:Export:ROIsDispFlg
	NVAR NoteDispFlg=root:Package_SLP:NEXAFS:Export:NoteDispFlg
	SVAR ExpDirectory=root:Package_SLP:NEXAFS:Export:ExpDirectory
	SVAR BaseName=root:Package_SLP:NEXAFS:Export:BaseName
	NVAR ExportIndex=root:Package_SLP:NEXAFS:Export:ExportIndex
	
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	
	String ScanName=SLP_NEX_ScanListW[SelRow][3]
	string NEXImage_FName=SLP_NEX_ScanListW[SelRow][2]+":"+SLP_NEX_ScanListW[SelRow][3]+"_Image"
	string NEXNote=SLP_NEX_ScanDisplayListW[SelRow][6]
	
	Wave SLP_NEX_ROIColor=Root:Package_SLP:NEXAFS:SLP_NEX_ROIColor
	Wave ScanW_ROIList=$(SLP_NEX_ScanListW[SelRow][2]+":"+SLP_NEX_ScanListW[SelRow][3]+"_ROIList")
	
	String ImageName=""
	
	String Exp_Name
	sprintf Exp_Name,"%s_%03d",BaseName,ExportIndex
	String PanelName=cleanupname(Exp_Name,0)
	print PanelName
	
	Display /N=$PanelName /W=(255,65,985,350)
	
	String GCol=""
	String GRow=""
	
	strswitch(GraphSel)	// string switch
		case "Selected scan":		// execute if case matches expression
			GCol="0"
			break
		case "Plot1":		// execute if case matches expression
			GCol="1"
			break
		case "Plot2":		// execute if case matches expression
			GCol="2"
			break						// exit from switch
	endswitch
	strswitch(WindowSel)	// string switch
		case "Raw data":		// execute if case matches expression
			GRow="0"
			break
		case "Normalization by I0":		// execute if case matches expression
			GRow="1"
			break
		case "Normalization by recipe":		// execute if case matches expression
			GRow="2"
			break						// exit from switch
	endswitch
	
	String NEXPanelGraphName="SLP_NEX_Panel_01#SLP_NEX_Graph"+GRow+GCol
	string TraceList=TraceNameList(NEXPanelGraphName,";",1)
	variable N_traces=itemsinlist(TraceList,";")
	string TraceName=""
	variable i=0
	variable j=0
	Variable ROI_Sel
	
	For (i=0;i<N_traces;i+=1)
			TraceName=stringFromList(i,TraceList)
			Wave TraceW=TraceNameToWaveRef(NEXPanelGraphName,TraceName)
			Wave xWave=XWaveRefFromTrace(NEXPanelGraphName,TraceName)
			
			If (StringMatch(GRow+GCol,"00")) //Rawdata plot
				If (i==0) //Izero
					Appendtograph /W=$PanelName/R=Right TraceW vs xWave
					ModifyGraph /W=$PanelName rgb($TraceName)=(0,0,0),lStyle($TraceName)=2
				Else
					Appendtograph /W=$PanelName TraceW vs xWave
					ROI_Sel=str2num(stringFromList(i-1,ROI_sel_List))
					ModifyGraph /W=$PanelName rgb($TraceName)=(SLP_NEX_ROIColor[ROI_Sel-1][0],SLP_NEX_ROIColor[ROI_Sel-1][1],SLP_NEX_ROIColor[ROI_Sel-1][2])
				EndIf
			Else //Other plots
				Appendtograph /W=$PanelName TraceW vs xWave
				ROI_Sel=str2num(stringFromList(i,ROI_sel_List))
				ModifyGraph /W=$PanelName rgb($TraceName)=(SLP_NEX_ROIColor[ROI_Sel-1][0],SLP_NEX_ROIColor[ROI_Sel-1][1],SLP_NEX_ROIColor[ROI_Sel-1][2])
			Endif
	EndFor
	If (StringMatch(GRow+GCol,"00")) //Rawdata plot
		Label /W=$PanelName left "\\Z14PEEM intensity (a.u.)"
		Label /W=$PanelName right "\\Z14Mesh current (A)"
		ModifyGraph /W=$PanelName lblMargin(right)=210
	Else
		Label /W=$PanelName left "\\Z14Normalised intensity (a.u.)"
		ModifyGraph /W=$PanelName mirror(left)=1
	EndIF
	
	ModifyGraph /W=$PanelName tick=2,mirror(bottom)=1,minor=1,fSize=14
	ModifyGraph /W=$PanelName lblMargin(left)=14,lblMargin(bottom)=7,standoff=0
	ModifyGraph /W=$PanelName lblPos(left)=61,lblPos(bottom)=42
	ModifyGraph /W=$PanelName lblLatPos(left)=2,lblLatPos(bottom)=20
	
	Label /W=$PanelName bottom "\\Z14Photon energy (eV)"
	
	If (ImgDispFlg||NoteDispFlg)
		If (StringMatch(GRow+GCol,"00"))
			ModifyGraph /W=$PanelName margin(right)=280
		Else
			ModifyGraph /W=$PanelName margin(right)=198
		EndIf
	EndIf
	
	If (ImgDispFlg)
		Display/W=(545,15,715,185)/HOST=$PanelName /N=NEXImage
		AppendImage /W=$(PanelName+"#NEXImage") $NEXImage_FName
		ModifyGraph /W=$(PanelName+"#NEXImage") margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3
		ModifyGraph /W=$(PanelName+"#NEXImage") tick=3,mirror=2,noLabel=2,standoff=0
	EndIf
	
	If (ROIsDispFlg)
		i=0
		Do
			If(WhichListItem(num2str(i+1),ROI_Sel_List,";")!=-1) //Draw ROI only if this ROI is on the ROI Sel List
				SLP_NEX_DrawROI(i+1,ScanW_ROIList[i][0],ScanW_ROIList[i][1],ScanW_ROIList[i][2],ScanW_ROIList[i][3],PanelName+"#NEXImage")
			EndIf
			i+=1
		While (!((ScanW_ROIList[i][0]==0)&&(ScanW_ROIList[i][1]==0)&&(ScanW_ROIList[i][2]==0)&&(ScanW_ROIList[i][3]==0)))
	EndIf
	
	If (NoteDispFlg)
//		SetDrawLayer /W=$PanelName UserFront
//		SetDrawEnv /W=$PanelName xcoord= abs,ycoord= abs,fsize=10
//		DrawText /W=$PanelName 547,204,NEXNote
		Textbox /W=$PanelName/A=LT/E=2 /F=0/X=75/Y=65 "\\Z10Scan: "+ScanName+"\r"+NEXNote
	EndIf
	
	NewPath NEXExpPath,ExpDirectory
	strswitch(ExpType)	// string switch
		case "JPEG":		// execute if case matches expression
			SavePICT/P=NEXExpPath /E=-6/B=288 as Exp_Name+".jpg"
			DoWindow /K $PanelName
			break	
		case "TIFF":		// execute if case matches expression
			SavePICT/P=NEXExpPath /E=-7/B=288 as Exp_Name+".tif"
			DoWindow /K $PanelName
			break
		case "PDF":		// execute if case matches expression
			SavePICT/P=NEXExpPath as Exp_Name+".pdf"
			DoWindow /K $PanelName
			break						// exit from switch
		case "Igor graph":		// execute if case matches expression
			Legend /W=$PanelName
			break						// exit from switch
	endswitch
	KillPath /A
	
	ExportIndex+=1
End



Function ButtonProc_NEX_Export(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	SVAR GraphSel=root:Package_SLP:NEXAFS:Export:GraphSel
	SVAR WindowSel=root:Package_SLP:NEXAFS:Export:WindowSel
	SVAR ExpType=root:Package_SLP:NEXAFS:Export:ExpType
	NVAR ImgDispFlg=root:Package_SLP:NEXAFS:Export:ImgDispFlg
	NVAR ROIsDispFlg=root:Package_SLP:NEXAFS:Export:ROIsDispFlg
	NVAR NoteDispFlg=root:Package_SLP:NEXAFS:Export:NoteDispFlg
	SVAR ExpDirectory=root:Package_SLP:NEXAFS:Export:ExpDirectory
	SVAR BaseName=root:Package_SLP:NEXAFS:Export:BaseName
	NVAR ExportIndex=root:Package_SLP:NEXAFS:Export:ExportIndex

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch with name of the control
				case "button_ExpBrowse":		// execute if case matches expression
					GetFileFolderInfo /D/Q
					ExpDirectory=S_Path
					 
					break
				case "button_ExpSave":
					ControlInfo /W=SLP_NEX_Export popup_ExpGraph
					GraphSel=S_Value
					ControlInfo /W=SLP_NEX_Export popup_ExpType
					WindowSel=S_Value
					ControlInfo /W=SLP_NEX_Export popup_ExpFileType
					ExpType=S_Value
					ControlInfo /W=SLP_NEX_Export check_ExpImage
					ImgDispFlg=V_Value
					ControlInfo /W=SLP_NEX_Export check_ExpROI
					ROIsDispFlg=V_Value
					ControlInfo /W=SLP_NEX_Export check_ExpNote
					NoteDispFlg=V_Value
					Dowindow /K SLP_NEX_Export
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function Panel_NEX_Exp() : Panel
	PauseUpdate; Silent 1		// building window...
	Dowindow /K SLP_NEX_Export
	NewPanel /N=SLP_NEX_Export /W=(901,51,1182,284)
	SetDrawLayer UserBack
	DrawText 8,21,"NEXAFS export options"
	
	SVAR GraphSel=root:Package_SLP:NEXAFS:Export:GraphSel
	SVAR WindowSel=root:Package_SLP:NEXAFS:Export:WindowSel
	SVAR ExpType=root:Package_SLP:NEXAFS:Export:ExpType
	NVAR ImgDispFlg=root:Package_SLP:NEXAFS:Export:ImgDispFlg
	NVAR ROIsDispFlg=root:Package_SLP:NEXAFS:Export:ROIsDispFlg
	NVAR NoteDispFlg=root:Package_SLP:NEXAFS:Export:NoteDispFlg
	SVAR ExpDirectory=root:Package_SLP:NEXAFS:Export:ExpDirectory
	SVAR BaseName=root:Package_SLP:NEXAFS:Export:BaseName
	NVAR ExportIndex=root:Package_SLP:NEXAFS:Export:ExportIndex
	
	PopupMenu popup_ExpGraph,pos={25,38},size={228,20},bodyWidth=200,title="Graph"
	PopupMenu popup_ExpGraph,mode=1,popvalue=GraphSel,value= #"\"Selected scan;Plot1;Plot2\""
	
	PopupMenu popup_ExpType,pos={16,61},size={237,20},bodyWidth=200,title="Window"
	PopupMenu popup_ExpType,mode=3,popvalue=WindowSel,value= #"\"Raw data;Normalization by I0;Normalization by recipe\""
	
	PopupMenu popup_ExpFileType,pos={10,86},size={254,20},bodyWidth=200,title="Export type"
	PopupMenu popup_ExpFileType,mode=2,popvalue=ExpType,value= #"\"JPEG;TIFF;PDF;Igor graph;Igor layout\""
	
	CheckBox check_ExpImage,pos={21,117},size={44,15},title="Image",value=ImgDispFlg
	CheckBox check_ExpROI,pos={80,118},size={37,15},title="ROIs",value=ROIsDispFlg
	CheckBox check_ExpNote,pos={131,118},size={39,15},title="Note",value=NoteDispFlg
	
	SetVariable setvar_ExpFolder,pos={16,140},size={200,15},title="Directory"
	SetVariable setvar_ExpFolder,value= root:Package_SLP:NEXAFS:Export:ExpDirectory
	
	SetVariable setvar_ExpBaseName,pos={15,158},size={200,15},title="Base name"
	SetVariable setvar_ExpBaseName,value= root:Package_SLP:NEXAFS:Export:BaseName
	
	SetVariable setvar_ExpIndex,pos={14,177},size={100,15},title="Number"
	SetVariable setvar_ExpIndex,limits={0,inf,1},value= root:Package_SLP:NEXAFS:Export:ExportIndex
	
	Button button_ExpBrowse,pos={219,138},size={50,20},proc=ButtonProc_NEX_Export,title="Browse..",fSize=10
	Button button_ExpSave,pos={96,203},size={100,20},proc=ButtonProc_NEX_Export,title="Save and close",fSize=10
End

Function SLP_NEX_ProcessScan(Scan_Sel)
	variable Scan_Sel
	
	Wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	Wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	
	variable N_ROIs=str2num(SLP_NEX_ScanDisplayListW[Scan_Sel][1])
	
	String W_Location=SLP_NEX_ScanListW[Scan_Sel][2]
	String ScanW_Name=SLP_NEX_ScanListW[Scan_Sel][3]
	String ScanW_FName=W_Location+":"+ScanW_Name
	String Recipe_FName=W_Location+":"+ScanW_Name+"_rcp"
	String ProcScan_xWFName=ScanW_FName+"_hvp"
	String Izero_WFName=ScanW_FName+"_I0"
	String BG_WFName=ScanW_FName+"_Bg"
	String BGI0_WFName=ScanW_FName+"_BgI0"
	
	wave /T Recipe_W=$Recipe_FName
	wave Proc_xW=$ProcScan_xWFName
	wave Izero_W=$Izero_WFName
	wave BG_W=$BG_WFName
	wave BGI0_W=$BGI0_WFName
	
	variable i=1 //For ROI no.
	variable j=1//For step no. in Recipe. j=0 is the Name of the recipe
	
	String ProcScan_WFName=""
	String Scan_WFName=""
	String Prochv_WFName=""
	String hv_WFName=""
	
	For (i=1;i<=N_ROIs;i+=1)
		ProcScan_WFName=ScanW_FName+"_ROI"+num2str(i)+"_prc"
		Prochv_WFName=ScanW_FName+"_hvp"
		Scan_WFName=ScanW_FName+"_ROI"+num2str(i)
		hv_WFName=ScanW_FName+"_hv"
		wave Proc_W=$ProcScan_WFName
		wave Prochv_W=$Prochv_WFName
		wave Scan_W=$Scan_WFName
		wave hv_W=$hv_WFName
		//Reset proc_W
		Duplicate /O Scan_W,$ProcScan_WFName
		//Reset Prochv_W
		Duplicate /O hv_W,$Prochv_WFName
		//Reset BG
		SLP_NEX_UpdateBG()
		//Then start processing
		Do
			StrSwitch(Recipe_W[j][0])
				Case "Normalise by I\B0":
					Proc_W/=Izero_W
					Break
					
				Case "Normalize pre-edge to one":
					SLP_NEX_Proc_NormPreEdge(ProcScan_WFName,str2num(Recipe_W[j][1]))
					Break
					
				Case "Normalise post-edge to one":
					SLP_NEX_Proc_NormPostEdge(ProcScan_WFName,str2num(Recipe_W[j][1]))
					Break
				
				Case "Subtract pre-edge to zero"	:
					SLP_NEX_Proc_SubtractPreEdge(ProcScan_WFName,str2num(Recipe_W[j][1]))
					Break
					
				Case "Shift energy scale": //This should be done before processing with BG
					SLP_NEX_Proc_ShiftEnergy(Prochv_WFName,str2num(Recipe_W[j][1]))
					SLP_NEX_UpdateBG() //BG needs to be shifted as well
					Break
				
				Case "Normalise BG by I\B0":
					BG_W/=BGI0_W
					Break
					
				Case "Normalise BG pre-edge to one":
					SLP_NEX_Proc_NormPreEdge(BGI0_WFName,str2num(Recipe_W[j][1]))
					Break
					
				Case "Subtract with BG":
					Proc_W-=BG_W
					Break
					
				Case "Divide with BG":
					Proc_W/=BG_W
					Break
					
				Case "Equalize step": //Added on SLPA_ce20180927b.ipf
					SLP_Util_EqualizeStep(str2num(Recipe_W[j][1]),ProcScan_WFName,Prochv_WFName) //Create processed wave with x-scaling (_xAdj)
					//Overwrite the ProcW
					Duplicate /O $(ProcScan_WFName+"_xAdj"),$ProcScan_WFName
					Killwaves $(ProcScan_WFName+"_xAdj")
					//Recreate Prochv_W (overwrite the existing one)
					Make /O/N=(dimsize($ProcScan_WFName,0)) $Prochv_WFName /Wave=Prochv_W
					Prochv_W=dimoffset($ProcScan_WFName,0)+p*(dimDelta($ProcScan_WFName,0))
					Break
		
			EndSwitch
			j+=1
		While (!stringmatch(Recipe_W[j][0],""))
		j=1 //Reset j
	EndFor

End

Function SLP_NEX_Proc_ShiftEnergy(xW_FName,Shift_amount)
	String xW_FName //Full wave name
	variable Shift_amount //how much is the shift in eV
	
	wave Processed_xWave=$xW_FName
	
	Processed_xWave+=Shift_amount
End

Function SLP_NEX_Proc_NormPreEdge(W_FName,Nrm_Point)
	String W_FName //Full wave name
	variable Nrm_Point //how far from the beginning of the scan to normallise 
	
	wave Processed_Wave=$W_FName
	
	variable Nrm_value=Processed_Wave[Nrm_Point]
	
	Processed_Wave/=Nrm_value
End

Function SLP_NEX_Proc_SubtractPreEdge(W_FName,Nrm_Point)
	String W_FName //Full wave name
	variable Nrm_Point //how far from the beginning of the scan to normallise 
	
	wave Processed_Wave=$W_FName
	
	variable Nrm_value=Processed_Wave[Nrm_Point]
	
	Processed_Wave-=Nrm_value
End

Function SLP_NEX_Proc_NormPostEdge(W_FName,Nrm_Point)
	String W_FName //Full wave name
	variable Nrm_Point //how far from the end of the scan to normallise 
	
	wave Processed_Wave=$W_FName
	
	variable Nrm_value=Processed_Wave[dimsize(Processed_Wave,0)-1-Nrm_Point]
	
	Processed_Wave/=Nrm_value
End

Function SLP_NEX_intrpt_ROIs(ROI_InputStr)
	string ROI_InputStr
	
	//Global string to pass the result to other functions
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	
	string Output_txt=""
	variable i=0
	variable j=0
	string new_txt=""
	string intermediate_txt=""
	string Start_txt=""
	String End_txt=""
	
	variable N_Items=ItemsInList(ROI_InputStr,",")
	For (i=0;i<N_Items;i+=1)
		intermediate_txt=stringFromList(i,ROI_InputStr,",")
		If (GrepString(intermediate_txt,"-"))
			Start_txt=StringFromList(0,intermediate_txt,"-")
			End_txt=StringFromList(1,intermediate_txt,"-")
			For (j=str2num(Start_txt);j<=str2num(End_txt);j+=1)
				New_txt=num2str(j)
				Output_txt=AddListItem(new_txt,Output_txt,";",inf)
			EndFor
		Else
			New_txt=intermediate_txt
			Output_txt=AddListItem(new_txt,Output_txt,";",inf)
		Endif
	
	Endfor

	ROI_sel_List=Output_txt

End

Function SLP_NEX_PlotScanP1()
	
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	WAVE SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	
	//Remove existing traces in the graph first
	string TraceList_01=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph01",";",1)
	string TraceList_11=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph11",";",1)
	string TraceList_21=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph21",";",1)
	string TraceList_02=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph02",";",1)
	string TraceList_12=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph12",";",1)
	string TraceList_22=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph22",";",1)
	variable N_traces_01=itemsinlist(TraceList_01)
	variable N_traces_11=itemsinlist(TraceList_11)
	variable N_traces_21=itemsinlist(TraceList_21)
	variable N_traces_02=itemsinlist(TraceList_02)
	variable N_traces_12=itemsinlist(TraceList_12)
	variable N_traces_22=itemsinlist(TraceList_22)

	string traceName=""
	variable i=0
	
	//Remove previous traces
	//Graph01
	If (N_traces_01!=0)
		For (i=0;i<N_traces_01;i+=1)
			traceName=stringFromList(i,TraceList_01)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph01 $traceName
		Endfor
	Endif
	//Graph11
	If (N_traces_11!=0)
		For (i=0;i<N_traces_11;i+=1)
			traceName=stringFromList(i,TraceList_11)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph11 $traceName
		Endfor
	Endif
	//Graph21
	If (N_traces_21!=0)
		For (i=0;i<N_traces_21;i+=1)
			traceName=stringFromList(i,TraceList_21)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph21 $traceName
		Endfor
	Endif
	//Graph02
	If (N_traces_02!=0)
		For (i=0;i<N_traces_02;i+=1)
			traceName=stringFromList(i,TraceList_02)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph02 $traceName
		Endfor
	Endif
	//Graph12
	If (N_traces_12!=0)
		For (i=0;i<N_traces_12;i+=1)
			traceName=stringFromList(i,TraceList_12)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph12 $traceName
		Endfor
	Endif
	//Graph22
	If (N_traces_22!=0)
		For (i=0;i<N_traces_22;i+=1)
			traceName=stringFromList(i,TraceList_22)
			//print TraceList_22
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph22 $traceName
		Endfor
	Endif
	
	//Prepare to plot
	variable N_ROIs=0
	string ROI_sel_txt=""
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	string ScanW_hv_FName=""
	string ScanW_hvp_FName=""
	string ScanW_ROI_FName=""
	string ScanW_ROInrm_FName=""
	string ScanW_ROIprc_FName=""
	variable ROI_Sel=0
	
	//Plot selected wave
	variable a=0
	For (a=0;a<dimsize(SLP_NEX_ScanDisplayListW,0);a+=1)
		//Plot1
		if (SLP_NEX_ScanDisplaySelListW[a][3]==48)
		
			N_ROIs=str2num(SLP_NEX_ScanDisplayListW[a][1])
			ROI_sel_txt=SLP_NEX_ScanDisplayListW[a][2]
			
			//Interprete user's ROI selection and save to ROI_sel_list global string
			SLP_NEX_intrpt_ROIs(ROI_sel_txt)
			
			//Start Plotting
			ScanW_hv_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_hv"
			ScanW_hvp_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_hvp"
			
			For (i=0;i<itemsinlist(ROI_sel_List,";");i+=1)
				ROI_Sel=str2num(stringFromList(i,ROI_sel_List))
				ScanW_ROI_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_ROI"+num2str(ROI_Sel)
				ScanW_ROInrm_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_ROI"+num2str(ROI_Sel)+"_nrm"
				ScanW_ROIprc_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_ROI"+num2str(ROI_Sel)+"_prc"
				
				Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph01 $ScanW_ROI_FName vs $ScanW_hv_FName
				SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph01",2)
				Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph11  $ScanW_ROInrm_FName vs $ScanW_hv_FName
				SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph11",3)
				Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph21  $ScanW_ROIprc_FName vs $ScanW_hvp_FName
				SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph21",3)
			EndFor
		Endif	
		//Plot2
		if (SLP_NEX_ScanDisplaySelListW[a][4]==48)
		
			N_ROIs=str2num(SLP_NEX_ScanDisplayListW[a][1])
			ROI_sel_txt=SLP_NEX_ScanDisplayListW[a][2]
			
			//Interprete user's ROI selection and save to ROI_sel_list global string
			SLP_NEX_intrpt_ROIs(ROI_sel_txt)
			
			//Start Plotting
			ScanW_hv_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_hv"
			ScanW_hvp_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_hvp"
			
			For (i=0;i<itemsinlist(ROI_sel_List,";");i+=1)
				ROI_Sel=str2num(stringFromList(i,ROI_sel_List))
				ScanW_ROI_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_ROI"+num2str(ROI_Sel)
				ScanW_ROInrm_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_ROI"+num2str(ROI_Sel)+"_nrm"
				ScanW_ROIprc_FName=SLP_NEX_ScanListW[a][2]+":"+SLP_NEX_ScanListW[a][3]+"_ROI"+num2str(ROI_Sel)+"_prc"
			
				Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph02 $ScanW_ROI_FName vs $ScanW_hv_FName
				SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph02",2)
				Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph12  $ScanW_ROInrm_FName vs $ScanW_hv_FName
				SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph12",3)
				Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph22  $ScanW_ROIprc_FName vs $ScanW_hvp_FName
				SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph22",3)
			EndFor
		Endif
	Endfor
End

Function SLP_NEX_CopynPlotSelected()
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	variable i=0
	variable j=0
	string GraphName=""
	variable PlotOption=0
	
	For (i=0;i<3;i+=1)
		For (j=0;j<3;j+=1)
			If (SLP_NEX_PlotMatrix[i][j]==1) //If 'Plot' is selected
				GraphName="SLP_NEX_Panel_01#SLP_NEX_Graph"+num2str(i)+num2str(j)
				If (i==0&&j==0)
					SLP_NEX_CopynPlot(GraphName,0)
				Elseif (i==1&&j==0)
					SLP_NEX_CopynPlot(GraphName,1)
				Elseif (i==0)
					SLP_NEX_CopynPlot(GraphName,2)
				Elseif (i==1||i==2)
					SLP_NEX_CopynPlot(GraphName,3)
				Endif
			Endif
		EndFor
	EndFor

End



Function SLP_NEX_PlotScan(Scan_Sel)
	variable Scan_Sel
	
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	
	variable N_ROIs=str2num(SLP_NEX_ScanDisplayListW[Scan_Sel][1])
	string ROI_sel_txt=SLP_NEX_ScanDisplayListW[Scan_Sel][2]
	
	//Interprete user's ROI selection and save to ROI_sel_list global string
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	SLP_NEX_intrpt_ROIs(ROI_sel_txt)
		//Check for validity of ROI selection
	variable last_ROI=str2num(stringfromlist(itemsinlist(ROI_Sel_List,";")-1,ROI_Sel_List))
	If (last_ROI>N_ROIs||numtype(last_ROI)==2)//Check if the index of the last ROI is more than the number of ROIs, or if the interpretation doesn't make sense (NaN)
		ROI_Sel_List="1;"
		DoAlert 0,"Wrong ROI selection"
		SLP_NEX_ScanDisplayListW[Scan_Sel][2]="1"
	Endif
	
	//Remove existing traces in the graph first
	string TraceList_00=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph00",";",1)
	string TraceList_10=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph10",";",1)
	string TraceList_20=TraceNameList("SLP_NEX_Panel_01#SLP_NEX_Graph20",";",1)
	variable N_traces_00=itemsinlist(TraceList_00)
	variable N_traces_10=itemsinlist(TraceList_10)
	variable N_traces_20=itemsinlist(TraceList_20)
	
		
	string traceName=""
	
	variable i=0
	
	//Remove previous traces
	//Graph00
	If (N_traces_00!=0)
		For (i=0;i<N_traces_00;i+=1)
			traceName=stringFromList(i,TraceList_00)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph00 $traceName
		Endfor
	Endif
	//Graph10
	If (N_traces_10!=0)
		For (i=0;i<N_traces_10;i+=1)
			traceName=stringFromList(i,TraceList_10)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph10 $traceName
		Endfor
	Endif
	//Graph20
	If (N_traces_20!=0)
		For (i=0;i<N_traces_20;i+=1)
			traceName=stringFromList(i,TraceList_20)
			RemoveFromGraph /W=SLP_NEX_Panel_01#SLP_NEX_Graph20 $traceName
		Endfor
	Endif
	
	//Start Plotting
	
	string ScanW_hv_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_hv"
	string ScanW_hvp_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_hvp"
	string ScanW_Ie_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_Ie"
	string ScanW_I0_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_I0"
	string ScanW_Image_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_Image"
	string ScanW_ROIList_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_ROIList"
	Wave ScanW_ROIList=$ScanW_ROIList_FName
	
	Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph00  /R=right $ScanW_I0_FName vs $ScanW_hv_FName
	
	string ScanW_ROI_FName=""
	string ScanW_ROInrm_FName=""
	string ScanW_ROIprc_FName=""
	variable ROI_Sel=0
	
	For (i=0;i<itemsinlist(ROI_sel_List,";");i+=1)
		ROI_Sel=str2num(stringFromList(i,ROI_sel_List))
		ScanW_ROI_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_ROI"+num2str(ROI_Sel)
		ScanW_ROInrm_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_ROI"+num2str(ROI_Sel)+"_nrm"
		ScanW_ROIprc_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_ROI"+num2str(ROI_Sel)+"_prc"
		
		Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph00 $ScanW_ROI_FName vs $ScanW_hv_FName
		SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph00",4)
		Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph10  $ScanW_ROInrm_FName vs $ScanW_hv_FName
		SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph10",5)
		Appendtograph /W=SLP_NEX_Panel_01#SLP_NEX_Graph20  $ScanW_ROIprc_FName vs $ScanW_hvp_FName
		SLP_NEX_FormatNEX("SLP_NEX_Panel_01#SLP_NEX_Graph20",5)
	EndFor
	
	//Update Recipe ListBox
	string ScanW_Rcp_FName=SLP_NEX_ScanListW[Scan_Sel][2]+":"+SLP_NEX_ScanListW[Scan_Sel][3]+"_rcp"
	wave Recipe_W=$ScanW_Rcp_FName
	ListBox List2 win=SLP_NEX_Panel_01,ListWave=Recipe_W
	SLP_NEX_Recipe_CreateSelWave(ScanW_Rcp_FName)
	
	//Image
	SLP_Util_RemoveAllImages("SLP_NEX_Panel_01#NEX_Image")
	appendImage /W=SLP_NEX_Panel_01#NEX_Image  $ScanW_Image_FName
	ModifyGraph /W=SLP_NEX_Panel_01#NEX_Image tick=3,noLabel=2,margin=3
	//ROIs
	drawaction /W=SLP_NEX_Panel_01#NEX_Image delete
	i=0
	Do
		SLP_NEX_DrawROI(i+1,ScanW_ROIList[i][0],ScanW_ROIList[i][1],ScanW_ROIList[i][2],ScanW_ROIList[i][3],"SLP_NEX_Panel_01#NEX_Image")
		i+=1
	While (!((ScanW_ROIList[i][0]==0)&&(ScanW_ROIList[i][1]==0)&&(ScanW_ROIList[i][2]==0)&&(ScanW_ROIList[i][3]==0)))
End

Function SLP_NEX_DrawROI(ROI_no,x0,y0,x1,y1,WindowName)
	Variable ROI_no,x0,y0,x1,y1
	String WindowName
	Wave SLP_NEX_ROIColor=Root:Package_SLP:NEXAFS:SLP_NEX_ROIColor
	SetDrawEnv /W=$WindowName xcoord= bottom,ycoord= left,linefgc= (SLP_NEX_ROIColor[ROI_no-1][0],SLP_NEX_ROIColor[ROI_no-1][1],SLP_NEX_ROIColor[ROI_no-1][2]),dash=0,fillpat= 0
	DrawRect /W=$WindowName x0,y0,x1,y1
	SetDrawEnv /W=$WindowName xcoord= bottom,ycoord= left,textrgb=(SLP_NEX_ROIColor[ROI_no-1][0],SLP_NEX_ROIColor[ROI_no-1][1],SLP_NEX_ROIColor[ROI_no-1][2]),fsize= 10
	DrawText /W=$WindowName x0,y0,num2str(ROI_no)
End	

Function SLP_NEX_NEXROI(DataVolW_FName,ROIW_FName,SuffixString)
	String DataVolW_FName,ROIW_FName,SuffixString
	
	Wave DataVolW=$DataVolW_FName
	Wave ROIW=$ROIW_FName
	Variable i,j
	Variable k=0
	
	Make /O /N=(dimsize(DataVolW,2)) $(DataVolW_FName+"_"+SuffixString) /WAVE=NEX_W
	
	For (i=0;i<dimsize(DataVolW,0);i+=1)
		For (j=0;j<dimsize(DataVolW,1);j+=1)
			If (ROIW[i][j]==1)
				NEX_W[]+=DataVolW[i][j][p]
				k+=1
			EndIf
		EndFor
	EndFor
	
	If (k>0)
		NEX_W/=k
	EndIf
	
	SetScale /P x,dimoffset(DataVolW,2),dimdelta(DataVolW,2),NEX_W
End

Function SLP_NEX_GrabImage(FileLocation,WaveLocation,ScanName)
	String FileLocation,WaveLocation,ScanName
	
	newpath /Q/O NEX_ImagePath FileLocation
	
	//To make it compatible with both .tif or .TIFF
	string filelist_tif=indexedfile(NEX_ImagePath,-1,".tif")
	string filelist_TIFF=indexedfile(NEX_ImagePath,-1,".TIFF")
	string filelist
	Variable N_Images=0
	
	If (itemsinlist(filelist_tif)!=0)
		filelist=filelist_tif
		N_Images=itemsinlist(filelist_tif)
	Else
		filelist=filelist_TIFF
		N_Images=itemsinlist(filelist_TIFF)
	Endif
		
	filelist=sortlist(filelist)
	
	imageload /Q/T=tiff /P=NEX_ImagePath stringfromlist(floor(N_Images/2),filelist)
	string ImageWaveName=stringfromlist(0,S_WaveNames)
	Wave ImgW=$ImageWaveName
	Duplicate /O ImgW, $(WaveLocation+":"+ScanName+"_Image")
	Killwaves ImgW
	KillPath /Z NEX_ImagePath
End

Function SLP_NEX_init()

	string Current_folder=getdatafolder(1)
	//newdatafolder /O root:NEXAFS //To store raw data
	newdatafolder /O root:Package_SLP
	newdatafolder /O root:Package_SLP:NEXAFS //To store global variables, waves
	setdatafolder root:Package_SLP:NEXAFS
	
	variable /G NEX_Scan_Sel=0
	variable /G NEX_BG_Sel=0
	make /T /O /N=(0,64) SLP_NEX_ScanListW //To store names and locations of files and waves
	SetDimLabel 1,0,FileLocation,SLP_NEX_ScanListW
	SetDimLabel 1,1,FileName,SLP_NEX_ScanListW
	SetDimLabel 1,2,DataLocation,SLP_NEX_ScanListW
	SetDimLabel 1,3,ScanName,SLP_NEX_ScanListW
	SetDimLabel 1,4,NROIs,SLP_NEX_ScanListW
	SetDimLabel 1,5,BG,SLP_NEX_ScanListW
	SetDimLabel 1,6,Bin,SLP_NEX_ScanListW
	SetDimLabel 1,7,Exposure,SLP_NEX_ScanListW
	SetDimLabel 1,8,Average,SLP_NEX_ScanListW
	SetDimLabel 1,9,ADate,SLP_NEX_ScanListW
	SetDimLabel 1,10,ATime,SLP_NEX_ScanListW
	SetDimLabel 1,11,Grating,SLP_NEX_ScanListW
	SetDimLabel 1,12,ERange,SLP_NEX_ScanListW
	SetDimLabel 1,13,EStep,SLP_NEX_ScanListW
	//SetDimLabel 1,14,  ,SLP_NEX_ScanListW
	
	//To store scan name for panel display (includes check box status)
	make /T /O /N=(0,16) SLP_NEX_ScanDisplayListW
	make /O /N=(0,16) SLP_NEX_ScanDisplaySelListW
	make /T /O /N=(16) SLP_NEX_ScanDisplayTitleW={"Scans","ROIs","Sel ROI","Plot1","Plot2","Fit","Note","Export","x","x","x","x","x","x","x","x"}
	
	SetDimLabel 1,0,Scan,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,1,ROIs,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,2,SelROI,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,3,Plot1,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,4,Plot2,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,5,Fit,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,6,Notes,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,7,Export,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,8,Merge,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,9,X,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,10,X,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,11,X,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,12,X,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,13,X,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,14,X,SLP_NEX_ScanDisplayListW
	SetDimLabel 1,15,X,SLP_NEX_ScanDisplayListW
	
	
	//make /T /O /N=(0,32) SLP_NEX_ScanParamListW //To store scan parameters
	
	//BG
	make /T /O /N=(1,8) SLP_NEX_BGListW //To store Backgrounds
	SLP_NEX_BGListW[0][0]="None"
	make /T /O /N=8 SLP_NEX_BGListColTitleW={"Name","Start","End","ROIs","Selected","File location","Wave location","Wave name"}
		//Folder to store BG
	newDataFolder Backgrounds
	setdatafolder root:Package_SLP:NEXAFS:Backgrounds
		//Create dummy waves for "None" BG
	Make /O /N=1 None_hv=0
	Make /O /N=1 None_I0=0
	Make /O /N=1 None_ROI1=0
	setdatafolder root:Package_SLP:NEXAFS:
	
	//PROC RECIPE
	make /T /O /N=(16,2) SLP_NEX_DefaultRecipeW //Default normalization recipes
		// - DEFAULT until 20180927a
	//SLP_NEX_DefaultRecipeW[p][0]={"Name:","Shift energy scale","Divide with BG","Normalise pre-edge to one"}
	//SLP_NEX_DefaultRecipeW[p][1]={"Standard recipe","0","","5"}
		// - DEFAULT after 20180927a
	SLP_NEX_DefaultRecipeW[p][0]={"Name:","Shift energy scale","Normalise by I\B0","Subtract pre-edge to zero","Normalise post-edge to one"}
	SLP_NEX_DefaultRecipeW[p][1]={"Standard recipe","0","","1","1"}
		//Create the list of all proc. steps
	make /T /O /N=(16,2) SLP_NEX_AllRecipeItemsW="" //all items
	SLP_NEX_AllRecipeItemsW[p][0]={"Normalise by I\B0","Normalize pre-edge to one","Subtract pre-edge to zero","Normalise BG by I\B0","Normalise BG pre-edge to one","Subtract with BG","Normalise post-edge to one","Shift energy scale","Shift BG energy scale","Divide with BG","Equalize step"}
	SLP_NEX_AllRecipeItemsW[p][1]={"","1","1","","1","","1","0","0","","0.2"}
	make /T /O /N=(16,2) SLP_NEX_SelRecipeItemsW ="" //Selected items (in Recipe mod panel)
	make /T /O /N=(16,2) SLP_NEX_UnselRecipeItemsW ="" //Unselected items (in Recipe mod panel)
		//Recipe selection wave
	make /O/N=(16,2) SLP_NEX_RecipeSelW
	SLP_NEX_RecipeSelW[p][0]=0
	SLP_NEX_RecipeSelW[p][1]=2
	
	//PLOT MATRIX
	make /O /N=(3,3) SLP_NEX_PlotMatrix //For plotting
	
	//ROI Color wave
	Make /O/N=(16,3) Root:Package_SLP:NEXAFS:SLP_NEX_ROIColor /WAVE=SLP_NEX_ROIColor
	SLP_NEX_ROIColor[0][0]={65535,0,0,52428,0,65535,0}
	SLP_NEX_ROIColor[0][1]={0,52428,0,52428,52428,0,0}
	SLP_NEX_ROIColor[0][2]={0,0,65535,1,52428,65535,0}
	
	//VARIABLEs
	variable /G NEX_InitFlg=1
	string /G NEX_ScanList=""
	string /G ROI_sel_txt=""
	string /G ROI_sel_List=""
	
	//WAVE for batch loading
	Make /O/T/N=(0,8) SLP_NEX_RawDataListW
	SetDimLabel 1,0,Sel,SLP_NEX_RawDataListW
	SetDimLabel 1,1,Name,SLP_NEX_RawDataListW
	SetDimLabel 1,2,Directory,SLP_NEX_RawDataListW
	SetDimLabel 1,3,NoteForLoading,SLP_NEX_RawDataListW
	SetDimLabel 1,4,DateCreated,SLP_NEX_RawDataListW
	SetDimLabel 1,5,DateModified,SLP_NEX_RawDataListW
	Make /O/N=(0,8) SLP_NEX_RawDataListSelW
	String /G NEX_MonitoredFolder
	
	//Export options
	newdatafolder /O root:Package_SLP:NEXAFS:Export
	SetDataFolder root:Package_SLP:NEXAFS:Export
	String /G GraphSel="Selected scan"
	String /G WindowSel="Normalization by recipe"
	String /G ExpType="JPEG"
	Variable /G ImgDispFlg=1
	Variable /G ROIsDispFlg=1
	Variable /G NoteDispFlg=1
	String /G ExpDirectory=""
	String /G BaseName="SLPA_NEX"
	Variable /G ExportIndex=0
	
	setdatafolder $Current_folder
End


Function SLP_NEX_RefreshBatchList(NEX_Folder_Location)
	string NEX_Folder_Location //Path to the NEXAFS data *w/o ":" at the end! If the location is "", then it will ask to choose a folder.
	
	SVAR NEX_ScanList=root:Package_SLP:NEXAFS:NEX_ScanList
	Wave /T SLP_NEX_RawDataListW=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListW
	Wave SLP_NEX_RawDataListSelW=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListSelW
	
	//If "", then ask to choose a folder.
	If (stringmatch(NEX_Folder_Location,""))
		GetFileFolderInfo /D /Q
		NEX_Folder_Location=S_Path
	Endif
	
	NewPath /Q /O SLP_NEX_PathName, NEX_Folder_Location
	
	string Current_ScanList=indexedDir(SLP_NEX_PathName,-1,0)
	string NewScan_List=""
	String ScanName=""
	String DataDirectory=""
	String TxtDataList=""
	//Variable col,row
	String ModifiedTimeString
	
	//Compare to see new scans
	variable i=0
	For (i=0;i<itemsinlist(Current_ScanList);i+=1)
		ScanName=stringfromlist(i,Current_ScanList) //ScanName=FolderName
		DataDirectory=NEX_Folder_Location+":"+ScanName
		NewPath /Q NEX_DataPath,DataDirectory
		TxtDataList=IndexedFile(NEX_DataPath, -1, ".txt")
		KillPath NEX_DataPath
		If (WhichListItem(ScanName+".txt",TxtDataList)!=-1) 
		//Only include directory with matching .txt file (in current LabView program (11.02.2019), the scan name is the same as the directory name)
			FindValue /TEXT=ScanName /TXOP=6 SLP_NEX_RawDataListW
			If (V_Value==-1)
				redimension /N=(dimsize(SLP_NEX_RawDataListW,0)+1,dimsize(SLP_NEX_RawDataListW,1)) SLP_NEX_RawDataListW
				redimension /N=(dimsize(SLP_NEX_RawDataListSelW,0)+1,dimsize(SLP_NEX_RawDataListSelW,1)) SLP_NEX_RawDataListSelW
				SLP_NEX_RawDataListW[dimsize(SLP_NEX_RawDataListW,0)-1][1]=ScanName //Raw data folder name (set by labview)
				SLP_NEX_RawDataListW[dimsize(SLP_NEX_RawDataListW,0)-1][2]=NEX_Folder_Location+":"+ScanName //Location of the raw data
				GetFileFolderInfo /Q/Z (NEX_Folder_Location+":"+ScanName+":"+ScanName+".txt" )
				SLP_NEX_RawDataListW[dimsize(SLP_NEX_RawDataListW,0)-1][4]=secs2date(V_creationDate,2)+" "+secs2time(V_creationDate,2)
				SLP_NEX_RawDataListW[dimsize(SLP_NEX_RawDataListW,0)-1][5]=secs2date(V_modificationDate,2)+" "+secs2time(V_modificationDate,2)
				sprintf ModifiedTimeString,"%d",V_modificationDate
				SLP_NEX_RawDataListW[dimsize(SLP_NEX_RawDataListW,0)-1][6]=ModifiedTimeString //For sorting
				
				SLP_NEX_RawDataListSelW[dimsize(SLP_NEX_RawDataListSelW,0)-1][0]=48
				SLP_NEX_RawDataListSelW[dimsize(SLP_NEX_RawDataListSelW,0)-1][3]=2
			Endif
		EndIf
	Endfor
End

Function SLP_Util_SortMulti2DWaves(SourceWFName,KeyColumn,OtherNumWFNameList,OtherTextWFNameList,Reverse_Flg)
	String SourceWFName //Source can be text wave only
	Variable KeyColumn
	String OtherNumWFNameList,OtherTextWFNameList //List of other waves to be sorted
	Variable Reverse_Flg
	
	Wave /T SourceW=$SourceWFName

	Variable i=0 //Column number
	Variable j=0 
	Variable Wtype //= Wavetype(SourceW,1) //If SourceW is a string Wtype=2, if a numeric wave, Wtype=1 
	
	Make /O/T/N=(dimsize(SourceW,0)) $(SourceWFName+"_Key") /Wave=KeyW
	KeyW[]=SourceW[p][KeyColumn]
	
	Make /O/T/N=(dimsize(SourceW,0)) $(SourceWFName+"_SDT") /Wave=SortedDataTextW
	Make /O/N=(dimsize(SourceW,0)) $(SourceWFName+"_SD") /Wave=SortedDataW
	
	For (i=0;i<dimsize(SourceW,1);i+=1)
		SortedDataTextW[]=SourceW[p][i]
		If (!Reverse_Flg)
			Sort KeyW,SortedDataTextW
		Else
			Sort /R KeyW,SortedDataTextW
		EndIf
		SourceW[][i]=SortedDataTextW[p]
	EndFor
	
	For (j=0;j<itemsinlist(OtherNumWFNameList,";");j+=1)
		Wave OtherNumW=$(stringfromlist(j,OtherNumWFNameList,";"))
		For (i=0;i<dimsize(OtherNumW,1);i+=1)
			SortedDataW[]=OtherNumW[p][i]
			If (!Reverse_Flg)
				Sort KeyW,SortedDataW
			Else
				Sort /R KeyW,SortedDataW
			EndIf
			OtherNumW[][i]=SortedDataW[p]
		EndFor
	EndFor
	
	For (j=0;j<itemsinlist(OtherTextWFNameList,";");j+=1)
		Wave /T OtherTextW=$(stringfromlist(j,OtherTextWFNameList,";"))
		For (i=0;i<dimsize(OtherTextW,1);i+=1)
			SortedDataTextW[]=OtherTextW[p][i]
			If (!Reverse_Flg)
				Sort KeyW,SortedDataTextW
			Else
				Sort /R KeyW,SortedDataTextW
			EndIf
			OtherTextW[][i]=SortedDataTextW[p]
		EndFor
	EndFor

	KillWaves KeyW
	KillWaves SortedDataW
	KillWaves SortedDataTextW
End

Function ButtonProc_NEX_Batch(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	Wave /T SLP_NEX_RawDataListW=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListW
	Wave SLP_NEX_RawDataListSelW=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListSelW
	SVAR NEX_MonitoredFolder=root:Package_SLP:NEXAFS:NEX_MonitoredFolder
	Variable i=0
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch with name of the control
				case "Button_CheckAll":		// execute if case matches expression
					//SLP_NEX_RawDataListSelW[][0]=48
					SLP_NEX_RawDataListSelW[][0]=SLP_NEX_RawDataListSelW[p][0]|0x10 //[20201230a] Use bitwise operation instead 
					break
				case "Button_CheckNone":		// execute if case matches expression
					//SLP_NEX_RawDataListSelW[][0]=32
					SLP_NEX_RawDataListSelW[][0]=SLP_NEX_RawDataListSelW[p][0]&~0x10 //[20201230a] Use bitwise operation instead 
					break
				case "Button_CheckSelected":		// execute if case matches expression
					//SLP_NEX_RawDataListSelW[][0]=32+(SLP_NEX_RawDataListSelW[p][0]==33||SLP_NEX_RawDataListSelW[p][0]==49||SLP_NEX_RawDataListSelW[p][0]==48)*16
					//[20201230a] Use bitwise operation instead 
					For (i=0;i<dimsize(SLP_NEX_RawDataListSelW,0);i+=1)
						If (SLP_NEX_RawDataListSelW[i][0]&0x09) //Check whether Bit 3 (Shift Selected) or Bit 0 (Selected) are '1'
							SLP_NEX_RawDataListSelW[i][0]=SLP_NEX_RawDataListSelW[i][0]|0x10
						EndIf
					EndFor
					break
				case "Button_UnCheckSelected":		// execute if case matches expression
					//SLP_NEX_RawDataListSelW[][0]=32+(SLP_NEX_RawDataListSelW[p][0]==48)*16
					//[20201230a] Use bitwise operation instead 
					For (i=0;i<dimsize(SLP_NEX_RawDataListSelW,0);i+=1)
						If (SLP_NEX_RawDataListSelW[i][0]&0x09) //Check whether Bit 3 (Shift Selected) or Bit 0 (Selected) are '1'
							SLP_NEX_RawDataListSelW[i][0]=SLP_NEX_RawDataListSelW[i][0]&~0x10
						EndIf
					EndFor
					break
				case "Button_Browse":
					GetFileFolderInfo /D/Q
					NEX_MonitoredFolder=removeending(S_Path)
					SLP_NEX_RefreshBatchList(NEX_MonitoredFolder)
					break
				case "Button_Remove":
					For (i=dimsize(SLP_NEX_RawDataListW,0)-1;i>=0;i-=1)
						If (SLP_NEX_RawDataListSelW[i][0]==48||SLP_NEX_RawDataListSelW[i][0]==49)
							If (Dimsize(SLP_NEX_RawDataListW,0)>1)
								DeletePoints i,1, SLP_NEX_RawDataListW
								DeletePoints i,1, SLP_NEX_RawDataListSelW
							Else //If it is the last one
								Make /O/T/N=(0,8) root:Package_SLP:NEXAFS:SLP_NEX_RawDataListW /Wave=SLP_NEX_RawDataListW
								SetDimLabel 1,0,Sel,SLP_NEX_RawDataListW
								SetDimLabel 1,1,Name,SLP_NEX_RawDataListW
								SetDimLabel 1,2,Directory,SLP_NEX_RawDataListW
								SetDimLabel 1,3,Note,SLP_NEX_RawDataListW
								Make /O/N=(0,8) root:Package_SLP:NEXAFS:SLP_NEX_RawDataListSelW
							EndIf
						EndIf
					EndFor
					break
				case "Button_Refresh":
					SLP_NEX_RefreshBatchList(NEX_MonitoredFolder)
					break
				case "Button_Load":
					For (i=0;i<dimsize(SLP_NEX_RawDataListW,0);i+=1)
						//If (SLP_NEX_RawDataListSelW[i][0]==48||SLP_NEX_RawDataListSelW[i][0]==49)
						If (SLP_NEX_RawDataListSelW[i][0]&0x10) //[20201230a] Use bitwise operation
							SLP_NEX_LoadSingle(SLP_NEX_RawDataListW[i][2]+":"+SLP_NEX_RawDataListW[i][1]+".txt",0)
						EndIf
					EndFor
					break
				case "Button_Sort":
					SLP_NEX_SortBatchList()
					break
				case "Button_Done":
					DoWindow /K SLP_NEX_LoadBatch
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_NEX_SortBatchList()
	String SortByStr
	String Reverse_FlgStr
	Prompt SortByStr, "Sort column by", popup, "Scan name;Data location;LoadNote;Date"
	Prompt Reverse_FlgStr, "Reverse order", popup, "No;Yes"
	DoPrompt "Sorting..",SortByStr,Reverse_FlgStr
	
	Variable Reverse_Flg=stringmatch(Reverse_FlgStr,"Yes")
	
	Variable KeyColumn=0
	strswitch(SortByStr)	// string switch
		case "Scan name":		// execute if case matches expression
			KeyColumn=1
			break						// exit from switch
		case "Data location":		// execute if case matches expression
			KeyColumn=2
			break						// exit from switch
		case "LoadNote":		// execute if case matches expression
			KeyColumn=3
			break						// exit from switch
		case "Date":		// execute if case matches expression
			KeyColumn=6
			break	
	endswitch
	SLP_Util_SortMulti2DWaves("root:Package_SLP:NEXAFS:SLP_NEX_RawDataListW",KeyColumn,"root:Package_SLP:NEXAFS:SLP_NEX_RawDataListSelW","",Reverse_Flg)
End

Function Panel_NEX_LoadBatch() : Panel
	PauseUpdate; Silent 1		// building window...
	DoWindow /K SLP_NEX_LoadBatch
	NewPanel /N=SLP_NEX_LoadBatch /W=(152,85,915,485)
	SetDrawLayer UserBack
	SetDrawEnv fsize= 16
	DrawText 8,32,"NEXAFS batch load"
	
	SetVariable setvar_BrowseDataFolder,pos={180,14},size={370,15},title="Data directory"
	SetVariable setvar_BrowseDataFolder,value= root:Package_SLP:NEXAFS:NEX_MonitoredFolder
	
	ListBox list_RawDataList,pos={6,40},size={748,325}
	ListBox list_RawDataList,listWave=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListW
	ListBox list_RawDataList,selWave=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListSelW
	ListBox list_RawDataList,mode= 9,widths={20,120,350,200} //[20201230a] Change to mode 9
	
	Button button_Browse,pos={556,11},size={64,21},proc=ButtonProc_NEX_Batch,title="Browse.."
	Button button_Browse,fSize=10
	Button button_Refresh,pos={624,11},size={64,21},proc=ButtonProc_NEX_Batch,title="Refresh"
	Button button_Refresh,fSize=10
	Button button_Sort,pos={691,11},size={64,21},proc=ButtonProc_NEX_Batch,title="Sort.."
	Button button_Sort,fSize=10

	
	Button button_CheckAll,pos={280,370},size={75,20},proc=ButtonProc_NEX_Batch,title="Check all"
	Button button_CheckAll,fSize=10
	Button button_CheckNone,pos={365,370},size={75,20},proc=ButtonProc_NEX_Batch,title="Check none"
	Button button_CheckNone,fSize=10
	Button button_CheckSelected,pos={9,370},size={120,20},proc=ButtonProc_NEX_Batch,title="Check selected"
	Button button_CheckSelected,fSize=10
	Button button_Load,pos={547,370},size={120,20},proc=ButtonProc_NEX_Batch,title="Load.."
	Button button_Load,fSize=10
	Button button_Done,pos={678,370},size={75,20},proc=ButtonProc_NEX_Batch,title="Done"
	Button button_Done,fSize=10
	Button button_UnCheckSelected,pos={137,370},size={120,20},proc=ButtonProc_NEX_Batch,title="Uncheck selected"
	Button button_UnCheckSelected,fSize=10
	Button button_Remove,pos={462,370},size={75,20},proc=ButtonProc_NEX_Batch,title="Remove"
	Button button_Remove,fSize=10
End
	

Function SLP_NEX_LoadScan(FileLocation,FileName,ScanName)
	string FileLocation,FileName,ScanName
	
	string Current_folder=getdatafolder(1)
	
	//Create a subfolder to store the waves
	string WaveLocation="root:Package_SLP:NEXAFS:"+ScanName
	newdatafolder /O $WaveLocation
	setdatafolder $WaveLocation
	
	string FileLocation_FName=FileLocation+":"+FileName
	
	string WaveBaseName=ScanName+"_"
	
	//Load .txt file into 2D matrix
	LoadWave/G/M/D/N=$WaveBaseName FileLocation_FName
	//Find the name of the wave (first block - for the first scan)
	string ScanWaveName=stringfromlist(0,S_waveNames)
	Rename $ScanWaveName,$ScanName //To remove Igor's auto-added number at the end of the wavename
	Wave ScanWave=$ScanName
	
	//Add a row in ScanListW et al.
	wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	wave SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	wave /T SLP_NEX_BGListW=root:Package_SLP:NEXAFS:SLP_NEX_BGListW
	wave /T SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
	variable N_Scans=dimsize(SLP_NEX_ScanListW,0)
	Redimension /N=(N_Scans+1,64)SLP_NEX_ScanListW
	Redimension /N=(N_Scans+1,16)SLP_NEX_ScanDisplayListW
	Redimension /N=(N_Scans+1,16)SLP_NEX_ScanDisplaySelListW
	
	//Create ROIListW
	Make /N=(32,4) $(ScanName+"_ROIList") /WAVE=ROIListW

	//Update ScanList
		//append details in the last row
	SLP_NEX_ScanListW[N_Scans][0]=FileLocation
	SLP_NEX_ScanListW[N_Scans][1]=FileName
	SLP_NEX_ScanListW[N_Scans][2]=WaveLocation
	SLP_NEX_ScanListW[N_Scans][3]=ScanName
	SLP_NEX_ScanListW[N_Scans][4]=num2str(dimsize(ScanWave,1)-3) //Number of ROI
	SLP_NEX_ScanListW[N_Scans][5]="None" //Name of BG

	//Load header
	Variable SLP_RefNum=0
	Variable MaxLine=128
	String Line_Str=""
	String Info_Str=""
	Variable Exit_Flg=0
	Variable i=0 //ROI number-1
	Variable j=0 //Line number
	
	Open /R SLP_RefNum as FileLocation_FName
	Do
		FReadLine SLP_RefNum,Line_Str
		If (GrepString(Line_Str,"Binning"))
			Info_Str=stringfromlist(1,Line_Str,"=")
			if( CmpStr(Info_Str[0]," ") ) //Remove leading space (" ")
		            Info_Str= Info_Str[1,inf]
		       EndIf
		       Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][6]=Info_Str
		ElseIf (GrepString(Line_Str,"Exposure time"))
			Info_Str=stringfromlist(1,Line_Str,"=")
			if( CmpStr(Info_Str[0]," ") ) //Remove leading space (" ")
		            Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][7]=Info_Str
		ElseIf (GrepString(Line_Str,"Image to Average"))
			Info_Str=stringfromlist(1,Line_Str,"=")
			if( CmpStr(Info_Str[0]," ") ) //Remove leading space (" ")
		            Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][8]=Info_Str
		ElseIf (GrepString(Line_Str,"Date"))
			Info_Str=stringfromlist(1,Line_Str,":")
			if( CmpStr(Info_Str[0],"	") ) //Remove leading tab (" ")
				Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][9]=Info_Str
		ElseIf (GrepString(Line_Str,"Measured time"))
			Info_Str= Line_Str[16,inf] //Cannot use stringfromlist
			 Info_Str=removeending(Info_Str)
			SLP_NEX_ScanListW[N_Scans][10]=Info_Str
		ElseIf (GrepString(Line_Str,"Select Grating"))
			Info_Str=stringfromlist(1,Line_Str,":")
			if( CmpStr(Info_Str[0],"	") ) //Remove leading tab (" ")
				Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][11]=Info_Str
		ElseIf (GrepString(Line_Str,"Scan Energy Range"))
			Info_Str=stringfromlist(1,Line_Str,":")
			if( CmpStr(Info_Str[0],"	") ) //Remove leading tab (" ")
				Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][12]=Info_Str
		ElseIf (GrepString(Line_Str,"Scan Energy Step"))
			Info_Str=stringfromlist(1,Line_Str,":")
			if( CmpStr(Info_Str[0],"	") ) //Remove leading tab (" ")
				Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanListW[N_Scans][13]=Info_Str
		ElseIf (GrepString(Line_Str,"Scan note"))
			Info_Str=stringfromlist(1,Line_Str,":")
			if( CmpStr(Info_Str[0],"	") ) //Remove leading tab (" ")
				Info_Str= Info_Str[1,inf]
		       EndIf
		        Info_Str=removeending(Info_Str)
		       SLP_NEX_ScanDisplayListW[N_Scans][6]=Info_Str
		ElseIf (GrepString(Line_Str,"ROI")&&!GrepString(Line_Str,"Eph"))
			Info_Str=stringfromlist(1,Line_Str,"=")
			Info_Str= Info_Str[1,inf]
			Info_Str=removeending(Info_Str)
			ROIListW[i][0]=str2num(stringfromlist(0,Info_Str,","))
			ROIListW[i][1]=str2num(stringfromlist(1,Info_Str,","))
			ROIListW[i][2]=str2num(stringfromlist(2,Info_Str,","))
			ROIListW[i][3]=str2num(stringfromlist(3,Info_Str,","))
			i+=1
		ElseIf (Stringmatch(Line_Str[0,2],"Eph")||j>=100)
			Exit_Flg=1
		Endif
		j+=1
	While (!Exit_Flg)
	Close SLP_RefNum
	
	//Add image
	SLP_NEX_GrabImage(FileLocation,WaveLocation,ScanName)
	
	//Update ScanDisplayList
	
	SLP_NEX_ScanDisplayListW[N_Scans][0]=ScanName
	
	variable N_ROIs=dimsize(ScanWave,1)-3
	SLP_NEX_ScanDisplayListW[N_Scans][1]=num2str(N_ROIs) //No. of ROIs
	
	//ROIs selection (select all by default)
	If (N_ROIs==1)
		SLP_NEX_ScanDisplayListW[N_Scans][2]="1" 
	Else
		SLP_NEX_ScanDisplayListW[N_Scans][2]="1-"+num2str(N_ROIs)
	Endif
	
	SLP_NEX_ScanDisplaySelListW[N_Scans][0]=0
	SLP_NEX_ScanDisplaySelListW[N_Scans][1]=0
	SLP_NEX_ScanDisplaySelListW[N_Scans][2]=2
	SLP_NEX_ScanDisplaySelListW[N_Scans][3]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][4]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][5]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][6]=2
	SLP_NEX_ScanDisplaySelListW[N_Scans][7]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][8]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][9]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][10]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][11]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][12]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][13]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][14]=32
	SLP_NEX_ScanDisplaySelListW[N_Scans][15]=32
	
	SLP_NEX_SplitColumn(WaveLocation,ScanName,dimsize(SLP_NEX_ScanListW,0)-1)
	
	setdatafolder $Current_folder
End

Function ButtonProc_NEX(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	ControlInfo /W=SLP_NEX_Panel_01 List0
	Variable SelRow=V_Value
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch with name of the control
				case "button_DeleteScan":		// execute if case matches expression
					SLP_NEX_DeleteScan()
					break
				case "Button_LoadBatch":
					Panel_NEX_LoadBatch()
					break
				case "Button_Refresh":
					Wave /T SLP_NEX_RawDataListW=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListW
					Wave SLP_NEX_RawDataListSelW=root:Package_SLP:NEXAFS:SLP_NEX_RawDataListSelW
					SVAR NEX_MonitoredFolder=root:Package_SLP:NEXAFS:NEX_MonitoredFolder
					Variable i=0
					SLP_NEX_RefreshBatchList(NEX_MonitoredFolder)
					For (i=0;i<dimsize(SLP_NEX_RawDataListW,0);i+=1)
						If (SLP_NEX_RawDataListSelW[i][0]==48||SLP_NEX_RawDataListSelW[i][0]==49)
							SLP_NEX_LoadSingle(SLP_NEX_RawDataListW[i][2]+":"+SLP_NEX_RawDataListW[i][1]+".txt",0)
						EndIf
					EndFor
					SLP_NEX_RawDataListSelW[][0]=32 //Unselect all after refresh
					break
				case "Button_SendtoMGFit":
					SLP_MGFit_CreatePanel()
					SLP_NEX_SendtoFit()
					break
				case "Button_ExportOption":
					Panel_NEX_Exp() 
					break
				case "Button_Export":
					SLP_NEX_ExportData(SelRow)
					break
				case "Button_BatchExport":
					SLP_NEX_BatchExport()
					break
				case "Button_PlotSelGraph": 
					SLP_NEX_CopynPlotSelected()
					break
				case "Button_LoadBG": //Load background
					GetFileFolderInfo /Q
					If (V_Flag!=-1) //If user choose a background (.txt) file
						string BG_W_FName=S_path
						string BgBaseName=stringfromlist(itemsinlist(BG_W_FName,":")-1,BG_W_FName,":")
						//Base name is from the filename
						If (Strlen(BgBaseName)>25)
							BgBaseName=BgBaseName[0,Strlen(BgBaseName)-25]
						EndIf
						BgBaseName=cleanupname(BgBaseName,0)
						variable ROI_sel=1
						Prompt BgBaseName,"Name of the background"
						Prompt ROI_sel, "ROI"
						Doprompt "Enter parameters", BgBaseName,ROI_Sel						
						SLP_NEX_LoadBG(BG_W_FName,BgBaseName,ROI_sel)
					EndIf
					break
				case "Button_AEYNEX":
					SLP_AEYNEX_ConvertUX()
					break
				case "Button_Correct_n_Merge":
					Panel_NEX_MultiScans_CreatePanel()
					break
				case "Button_MoveUp":
					SLP_NEX_MoveDataRow("Up")
					break
				case "Button_MoveDown":
					SLP_NEX_MoveDataRow("Down")
					break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_NEX_MoveDataRow(MvDirection)
	String MvDirection
	//CREATED: 23.07.2020
	//DESCRIPTIONS: move data in ScanList up and down so that users can sort the scans
		
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	wave SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW


	ControlInfo /W=SLP_NEX_Panel_01 list0
	variable SelRow=V_value
	Make /T/O/N=(1,dimsize(SLP_NEX_ScanListW,1)) root:Package_SLP:NEXAFS:ScanListSwapRow /Wave=ScanListSwapRow
	Make /T/O/N=(1,dimsize(SLP_NEX_ScanDisplayListW,1)) root:Package_SLP:NEXAFS:ScanListDispSwapRow /Wave=ScanListDispSwapRow
	Make /O/N=(1,dimsize(SLP_NEX_ScanDisplaySelListW,1)) root:Package_SLP:NEXAFS:ScanListDispSelSwapRow /Wave=ScanListDispSelSwapRow
	
	ScanListSwapRow=SLP_NEX_ScanListW[SelRow][q]
	ScanListDispSwapRow=SLP_NEX_ScanDisplayListW[SelRow][q]
	ScanListDispSelSwapRow=SLP_NEX_ScanDisplaySelListW[SelRow][q]
	
	strswitch(MvDirection)	// string switch
		case "Up":
			If (SelRow>0)		
				SLP_NEX_ScanListW[SelRow][]=SLP_NEX_ScanListW[SelRow-1][q]
				SLP_NEX_ScanDisplayListW[SelRow][]=SLP_NEX_ScanDisplayListW[SelRow-1][q]
				SLP_NEX_ScanDisplaySelListW[SelRow][]=SLP_NEX_ScanDisplaySelListW[SelRow-1][q]
				SLP_NEX_ScanListW[SelRow-1][]=ScanListSwapRow[0][q]
				SLP_NEX_ScanDisplayListW[SelRow-1][]=ScanListDispSwapRow[0][q]
				SLP_NEX_ScanDisplaySelListW[SelRow-1][]=ScanListDispSelSwapRow[0][q]
				ListBox list0 win=SLP_NEX_Panel_01,SelRow=SelRow-1
			EndIf
			break						
		case "Down":
			If (SelRow<dimsize(SLP_NEX_ScanListW,0)-1)
				SLP_NEX_ScanListW[SelRow][]=SLP_NEX_ScanListW[SelRow+1][q]
				SLP_NEX_ScanDisplayListW[SelRow][]=SLP_NEX_ScanDisplayListW[SelRow+1][q]
				SLP_NEX_ScanDisplaySelListW[SelRow][]=SLP_NEX_ScanDisplaySelListW[SelRow+1][q]
				SLP_NEX_ScanListW[SelRow+1][]=ScanListSwapRow[0][q]
				SLP_NEX_ScanDisplayListW[SelRow+1][]=ScanListDispSwapRow[0][q]
				SLP_NEX_ScanDisplaySelListW[SelRow+1][]=ScanListDispSelSwapRow[0][q]
				ListBox list0 win=SLP_NEX_Panel_01,SelRow=SelRow+1
			EndIf
			break						
	endswitch
End



Function SLP_NEX_LoadBG(FileFName,BgBaseName,ROI_sel)
	string FileFName,BgBaseName
	variable ROI_sel
	
	wave /T SLP_NEX_BGListW=root:Package_SLP:NEXAFS:SLP_NEX_BGListW
	NVAR NEX_BG_Sel=root:Package_SLP:NEXAFS:NEX_BG_Sel
	
	string CrntDataFolder=getDatafolder(1)
	
	string BGLocation="root:Package_SLP:NEXAFS:Backgrounds"
	
	SetDataFolder $BGLocation
	
	//Check for duplicate BG Name
	String BGW_List=WaveList("*", ";", "" )
	If (WhichListItem((BgBaseName+"_hv"),BGW_List,";")!=-1||!Stringmatch(BgBaseName,cleanupname(BgBaseName,0))) //If duplicated or illegal
		Do
			BgBaseName=Cleanupname(BgBaseName,0)
			Prompt BgBaseName,"Please enter a new background wave name"
			DoPrompt "WARNING: duplicated or illegal background wave name",BgBaseName
			If(V_Flag) //If cancel is clicked
				Return 0 //Exit function
			EndIf
		While (WhichListItem(BgBaseName+"_hv",BGW_List,";")!=-1||!Stringmatch(BgBaseName,cleanupname(BgBaseName,0)))
	EndIf
	
	//Load .txt file into 2D matrix
	LoadWave/G/M/D/N=$BgBaseName FileFName
	//Find the name of the wave (first block - for the first scan)
	string BgWaveName=stringfromlist(0,S_waveNames)
	
	Wave Bg_W=$BgWaveName
	
	//Update ScanList
		//Add 1 row at the end with Redimension
	variable N_Bg=dimsize(SLP_NEX_BGListW,0)
	Redimension /N=(N_Bg+1,dimsize(SLP_NEX_BGListW,1))SLP_NEX_BGListW
		//append details in the last row
	SLP_NEX_BGListW[N_Bg][0]=BgBaseName
	SLP_NEX_BGListW[N_Bg][5]=FileFName
	SLP_NEX_BGListW[N_Bg][6]=BGLocation
	SLP_NEX_BGListW[N_Bg][7]=BgWaveName
	
	variable N_ROIs=dimsize(BG_W,1)-3
	SLP_NEX_BGListW[N_Bg][3]=num2str(N_ROIs) //No. of ROIs
	
	//ROIs selection (select 1 by default)
	If (ROI_sel>N_ROIs||ROI_sel<1)
		SLP_NEX_BGListW[N_Bg][4]="1" 
	Else
		SLP_NEX_BGListW[N_Bg][4]=num2str(ROI_Sel)
	Endif
	
	//SLP_NEX_SplitColumn(WaveLocation,ScanWaveName,dimsize(SLP_NEX_ScanParamListW,0)-1)
	
	variable i=0
	string New_BgW_Name=""
	string Suffix=""
	
	For (i=0;i<dimsize(Bg_W,1);i+=1)
		If (i==0)
			Suffix="_hv"
		ElseIf (i==1)
			Suffix="_Ie"
		ElseIf (i==2)
			Suffix="_I0"
		Elseif (i>2)
			Suffix="_ROI"+num2str(i-2)
		Endif
		New_BgW_Name=BgBaseName+Suffix
		Duplicate /O /R=[][i] Bg_W,$New_BgW_Name /Wave=New_BgW
		Redimension /N=(dimsize(New_BgW,0)) New_BgW
		
		If (i==0)
			SLP_NEX_BGListW[N_Bg][1]=num2str(New_BgW[0])
			SLP_NEX_BGListW[N_Bg][2]=num2str(New_BgW[dimsize(New_BgW,0)-1])
		Endif
		
		If (i==2)
			SetScale /I x str2num(SLP_NEX_BGListW[N_Bg][1]),str2num(SLP_NEX_BGListW[N_Bg][2]),New_BgW
		Endif
		
		If (i>2)
			SetScale /I x str2num(SLP_NEX_BGListW[N_Bg][1]),str2num(SLP_NEX_BGListW[N_Bg][2]),New_BgW
		Endif
		
	EndFor
	killwaves Bg_W
	SetDataFolder $CrntDataFolder
End

Function SLP_NEX_CreatePanel() : Panel
	DoWindow /K SLP_NEX_Panel_01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(50,70,1200,670) /N=SLP_NEX_Panel_01
	
	//Check if it is the first time that the program is run
	If (!DataFolderExists("root:Package_SLP:NEXAFS"))
		SLP_NEX_init()
	Endif
	NVAR NEX_InitFlg=root:Package_SLP:NEXAFS:NEX_InitFlg
	
	wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	wave SLP_NEX_ScanDisplaySelListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplaySelListW
	wave /T SLP_NEX_ScanDisplayTitleW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayTitleW
	wave /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	wave /T SLP_NEX_BGListW=root:Package_SLP:NEXAFS:SLP_NEX_BGListW
	wave /T SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
	wave /T SLP_NEX_BGListColTitleW=root:Package_SLP:NEXAFS:SLP_NEX_BGListColTitleW
	wave SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	wave SLP_NEX_RecipeSelW=root:Package_SLP:NEXAFS:SLP_NEX_RecipeSelW
	
	SetDrawLayer UserBack
	SetDrawEnv fsize=16
	
	variable Matrix_Left=400
	variable Matrix_xSize=740
	variable Matrix_Top=80
	variable Matrix_ySize=500
	variable ChkBox_Xoffset=180
	variable ChkBox_Yoffset=-17
	variable Graph_FrameWidth=20
	
	DrawText 13,28,"SLRI LEEM PEEM NEXAFS Panel"
	DrawText 14,51,"Scans"
	DrawText 5,312,"Backgrounds"
	DrawText 12,458,"Recipes"
	
	ListBox list0,pos={5,95},size={380,195}, listWave=SLP_NEX_ScanDisplayListW,selWave=SLP_NEX_ScanDisplaySelListW
	//ListBox list0,widths={72, 29, 49, 33, 33, 25, 87, 25, 25, 25, 25, 25, 25, 25, 25, 25},userColumnResize=1//,titleWave=SLP_NEX_ScanDisplayTitleW - Use Dimension label instead 
	ListBox list0,widths={72, 29, 49, 33, 33, 25, 87, 36, 36, 15, 15, 15, 15, 15, 15, 15},userColumnResize=1//,titleWave=SLP_NEX_ScanDisplayTitleW - Use Dimension label instead 

	
	ListBox list0,proc=ListBoxProc_NEX_ScanList
	ListBox list0,mode= 2,selRow= 0
	
	ListBox list1,pos={5,315},size={380,115}, listWave=SLP_NEX_BGListW,widths={85, 35, 35, 35, 50, 80, 80, 80},mode=2,userColumnResize=1,titleWave=SLP_NEX_BGListColTitleW
	ListBox list1,proc=ListBoxProc_NEX_BGList
	
	ListBox list2,pos={5,465},size={212,121}, selWave=SLP_NEX_RecipeSelW
	ListBox list2,widths={150,30},userColumnResize=1,proc=ListBoxProc_Recipe

	Button Button_Refresh,pos={619,12},size={75,20},title="Auto load",proc=ButtonProc_NEX,fsize=10

	Button Button_LoadScan,pos={54,36},size={96,16},proc=ButtonProc_NEX_LoadScans,title="Load scans..",fSize=10
	Button Button_DeleteScan,pos={154,36},size={78,16},proc=ButtonProc_NEX,title="Delete scan..",fSize=10
	Button Button_LoadBatch,pos={240,35},size={96,16},proc=ButtonProc_NEX,title="Load batch..",fSize=10

	Button Button_BatchExport,pos={282,55},size={96,16},proc=ButtonProc_NEX,title="Batch export"
	Button Button_BatchExport,fSize=10

	Button Button_NewROIs,pos={107,57},size={89,16},title="New ROI..",fSize=10
	Button Button_DisplayImage,pos={7,55},size={97,16},title="Display images..",fSize=10
	Button Button_SendtoMGFit,pos={202,56},size={76,16},proc=ButtonProc_NEX,title="Send to fit",fSize=10

	Button Button_LoadBG,pos={100,297},size={104,16},title="Load background..",fSize=10,proc =ButtonProc_NEX
	
	Button Button_ModifyRecipe,pos={60,444},size={60,15},title="Modify..",fSize=10, proc=ButtonProc_NEX_ModRecipe
	Button Button_ResetRecipe,pos={120,444},size={100,15},title="Reset to default",fSize=10,proc=ButtonProc_NEX_Recipe_LoadDef
	
	Button Button_PlotSelGraph,pos={Matrix_Left,565},size={120,16},fsize=10,title="Plot selected graph..",proc=ButtonProc_NEX
	
	Button Button_Export,pos={525,565},size={91,16},proc=ButtonProc_NEX,title="Export"
	Button Button_Export,fSize=10
	Button Button_ExportOption,pos={621,565},size={95,16},proc=ButtonProc_NEX,title="Export options.."
	Button Button_ExportOption,fSize=10

	Button Button_AEYNEX win=SLP_NEX_Panel_01,pos={5,76},size={110,16},proc=ButtonProc_NEX,title="Convert to AEYNEX",fSize=10
	
	Button Button_Correct_n_Merge,pos={120.00,76.00},size={110.00,16.00},proc=ButtonProc_NEX,title="Correct and merge..",fSize=10

	Button Button_MoveUp,pos={239.00,76.00},size={40.00,16.00},proc=ButtonProc_NEX,title="Up",fSize=10
	Button Button_MoveDown,pos={283.00,76.00},size={40.00,16.00},proc=ButtonProc_NEX,title="Down",fSize=10


	Button Button_Done,pos={950,565},size={50,16},fSize=10,title="Done",proc=ButtonProc_NEX_done

	//SetVariable setvar_Plot_SelScan,pos={233,38},size={223,15},title="Plot1 name:",limits={-inf,inf,0}
	//SetVariable setvar_Plot1_Name,pos={479,37},size={215,15},title="Plot1 name:",limits={-inf,inf,0}
	//SetVariable setvar_Plot2_Name,pos={705,34},size={229,15},title="Plot2 name:",limits={-inf,inf,0}
	SetVariable setvar_MonitoredFolder,pos={262,12},size={349,15},title="Monitored folder:",limits={-inf,inf,0},value=root:Package_SLP:NEXAFS:NEX_MonitoredFolder
	
	DrawText Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*0/3-20,"\Z16Selected scan"
	DrawText Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*0/3-20,"\Z16Plot1"
	DrawText Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*0/3-20,"\Z16Plot2"
	
	DrawText Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*0/3,"Raw data"
	DrawText Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*1/3,"I\\B0\\M normalised"
	DrawText Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*2/3,"Normalised by recipe"
	DrawText Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*0/3,"Raw data"
	DrawText Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*1/3,"I\\B0\\M normalised"
	DrawText Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*2/3,"Normalised by recipe"
	DrawText Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*0/3,"Raw data"
	DrawText Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*1/3,"I\\B0\\M normalised"
	DrawText Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*2/3,"Normalised by recipe"
		
	CheckBox check00,pos={Matrix_left+Matrix_xSize*0/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*0/3+ChkBox_Yoffset},size={35,15},title="Plot",value=SLP_NEX_PlotMatrix[0][0],proc=CheckProc00
	CheckBox check10,pos={Matrix_left+Matrix_xSize*0/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*1/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[1][0],proc=CheckProc10
	CheckBox check20,pos={Matrix_left+Matrix_xSize*0/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*2/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[2][0],proc=CheckProc20
	CheckBox check01,pos={Matrix_left+Matrix_xSize*1/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*0/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[0][1],proc=CheckProc01
	CheckBox check11,pos={Matrix_left+Matrix_xSize*1/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*1/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[1][1],proc=CheckProc11
	CheckBox check21,pos={Matrix_left+Matrix_xSize*1/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*2/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[2][1],proc=CheckProc21
	CheckBox check02,pos={Matrix_left+Matrix_xSize*2/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*0/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[0][2],proc=CheckProc02
	CheckBox check12,pos={Matrix_left+Matrix_xSize*2/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*1/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[1][2],proc=CheckProc12
	CheckBox check22,pos={Matrix_left+Matrix_xSize*2/3+ChkBox_xoffset,Matrix_top+Matrix_ySize*2/3+ChkBox_Yoffset},size={35,15},title="Plot",value= SLP_NEX_PlotMatrix[2][2],proc=CheckProc22
	
	Display/W=(Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*0/3,Matrix_left+Matrix_xSize*1/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*1/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph00	
	Display/W=(Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*1/3,Matrix_left+Matrix_xSize*1/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*2/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph10
	Display/W=(Matrix_left+Matrix_xSize*0/3,Matrix_top+Matrix_ySize*2/3,Matrix_left+Matrix_xSize*1/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*3/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph20
	
	Display/W=(Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*0/3,Matrix_left+Matrix_xSize*2/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*1/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph01	
	Display/W=(Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*1/3,Matrix_left+Matrix_xSize*2/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*2/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph11
	Display/W=(Matrix_left+Matrix_xSize*1/3,Matrix_top+Matrix_ySize*2/3,Matrix_left+Matrix_xSize*2/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*3/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph21

	Display/W=(Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*0/3,Matrix_left+Matrix_xSize*3/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*1/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph02	
	Display/W=(Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*1/3,Matrix_left+Matrix_xSize*3/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*2/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph12
	Display/W=(Matrix_left+Matrix_xSize*2/3,Matrix_top+Matrix_ySize*2/3,Matrix_left+Matrix_xSize*3/3-Graph_FrameWidth,Matrix_top+Matrix_ySize*3/3-Graph_FrameWidth)/HOST=SLP_NEX_Panel_01 /N=SLP_NEX_Graph22
	
	
	//Image
	Display /HOST=SLP_NEX_Panel_01 /N=NEX_Image /W=(224,446,388,584)
	
	//Plot and recall data selection if some data has already been loaded before
	If (NEX_InitFlg==0)
		NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
		SLP_NEX_PlotScan(NEX_Scan_Sel)
		ListBox List0, selRow=NEX_Scan_Sel,Row=NEX_Scan_Sel
		SLP_NEX_PlotScanP1()
		string BG_Name=SLP_NEX_ScanListW[NEX_Scan_Sel][5]
		variable BG_Sel=SLP_NEX_FindBGPos(BG_Name)
		ListBox List1, SelRow=BG_Sel
	Endif
	
End

Function SLP_NEX_FormatNEX(GraphName,Option)
	string GraphName
	variable option
	//Option 0 = Raw data with Izero (single)
	//Option 1 = Norm. & Proc. (single)
	//Option 2 = Raw data w/o Izero (multi - Gradient)
	//Option 3 = Norm. & Proc. (multi - Gradient)
	//Option 4 = Raw data Izero  (Single - ROI colors)
	//Option 5 = Norm. & Proc. (Single - ROI colors)

	ModifyGraph /W=$GraphName tick=2,mirror(bottom)=1,noLabel=1,standoff=0;DelayUpdate
	ModifyGraph /W=$GraphName noLabel(bottom)=0
	Label /W=$GraphName bottom "Photon energy (eV)"
	ModifyGraph /W=$GraphName margin(left)=23,margin(bottom)=28,margin(right)=23
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	variable ROI_Sel=0
	string TraceList=TraceNameList(GraphName,";",1)
	variable N_traces=itemsinlist(TraceList,";")
	string TraceName1=""
	string TraceName2=""
	variable i=0
	variable Grad_offset=30000
	Wave SLP_NEX_ROIColor=Root:Package_SLP:NEXAFS:SLP_NEX_ROIColor
	
	If (Option==0)
		Label /W=$GraphName left "\Z08PEEM intensity";DelayUpdate
		Label /W=$GraphName right "\Z08I\B0\Z08 from gold mesh";DelayUpdate
				
		TraceName1=StringFromList(0,TraceList)
		TraceName2=StringFromList(1,TraceList)
		
		ModifyGraph /W=$GraphName lstyle($TraceName1)=2, rgb($TraceName1)=(0,0,0)
	Elseif (option==1)
		Label /W=$GraphName left "\Z08Normalised intensity";DelayUpdate
		ModifyGraph /W=$GraphName mirror(left)=1
	Elseif (option==2)
		Label /W=$GraphName left "\Z08PEEM intensity";DelayUpdate
		ModifyGraph /W=$GraphName mirror(left)=1
		//Apply gradient
		For (i=0;i<N_traces;i+=1)
			TraceName1=stringFromList(i,TraceList)
			ModifyGraph /W=$GraphName rgb($TraceName1)=(Grad_Offset+(65535-Grad_Offset)*(i/N_traces),20000,20000)
		EndFor
	Elseif (option==3)
		Label /W=$GraphName left "\Z08Normalised intensity";DelayUpdate
		ModifyGraph /W=$GraphName mirror(left)=1
		//Apply gradient
		For (i=0;i<N_traces;i+=1)
			TraceName1=stringFromList(i,TraceList)
			ModifyGraph /W=$GraphName rgb($TraceName1)=(Grad_Offset+(65535-Grad_Offset)*(i/N_traces),20000,20000)
		EndFor
	Elseif (option==4)
		Label /W=$GraphName left "\Z08PEEM intensity";DelayUpdate
		//Apply gradient
		TraceName1=stringFromList(0,TraceList)
		ModifyGraph /W=$GraphName lstyle($TraceName1)=2, rgb($TraceName1)=(0,0,0)
		For (i=1;i<N_traces;i+=1)
			TraceName1=stringFromList(i,TraceList)
			ROI_Sel=str2num(stringFromList(i-1,ROI_sel_List))
			ModifyGraph /W=$GraphName rgb($TraceName1)=(SLP_NEX_ROIColor[ROI_Sel-1][0],SLP_NEX_ROIColor[ROI_Sel-1][1],SLP_NEX_ROIColor[ROI_Sel-1][2])
		EndFor
	Elseif (option==5)
		Label /W=$GraphName left "\Z08Normalized intensity";DelayUpdate
		//Apply gradient
		For (i=0;i<N_traces;i+=1)
			TraceName1=stringFromList(i,TraceList)
			ROI_Sel=str2num(stringFromList(i,ROI_sel_List))
			ModifyGraph /W=$GraphName rgb($TraceName1)=(SLP_NEX_ROIColor[ROI_Sel-1][0],SLP_NEX_ROIColor[ROI_Sel-1][1],SLP_NEX_ROIColor[ROI_Sel-1][2])
		EndFor
	Elseif (option==-1)
		Modifygraph mirror=1
		Label left "NEXAFS Intensity"
	Endif
	
End

Function SLP_NEX_CopynPlot(GraphName,Plot_Option) //[Note]*X-wave is not copied*
	string GraphName
	variable Plot_Option
	
	string TraceList=TraceNameList(GraphName,";",1)
	variable N_traces=itemsinlist(TraceList,";")
	string TraceName=""
	string NewWaveName=""
	string NewxWaveName=""
	variable i=0
	variable j=0 //For ROI name
	variable k=0 //For ROI color shading
	
	Display
	
	String LegendString=""
	String ScanNote=""
	String ScanName=""
	String ROI_sel_txt=""
	String ROI_No=""
	Variable ColorR
	Variable ColorG
	Variable ColorB
	variable MinColorRatio=0.2 //Minimum brightness for shading
	
	Wave SLP_NEX_ROIColor=Root:Package_SLP:NEXAFS:SLP_NEX_ROIColor
	SVAR ROI_sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	
	Variable ScanRow=-1
	Wave /T SLP_NEX_ScanDisplayListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanDisplayListW
	
	For (i=0;i<N_traces;i+=1)
			TraceName=stringFromList(i,TraceList)
			Wave TraceW=TraceNameToWaveRef(GraphName,TraceName)
			Wave xWave=XWaveRefFromTrace(GraphName,TraceName)
			NewWaveName=TraceName//+"_y"
			//NewxWaveName=TraceName+"_x"
			Duplicate /O TraceW,$NewWaveName /WAVE=NewWave
			//Duplicate /O xWave,$NewxWaveName /WAVE=NewxWave
			
			If (i==0&&Plot_Option==0)
				Appendtograph /R=Right NewWave vs xWave
			Else
				Appendtograph NewWave vs xWave
			Endif
			
			ScanName=StringFromList(3,GetWavesDataFolder(TraceW,1),":")
			
			FindValue /TEXT=ScanName /TXOP=6 SLP_NEX_ScanDisplayListW
			If (ScanRow!=V_Value)
				j=0 //Reset the ROI name index
				k+=1 //Turn the shade of ROI color down
			Endif
			
			ScanRow=V_Value
			ScanNote=SLP_NEX_ScanDisplayListW[V_Value][6]
			ROI_sel_txt=SLP_NEX_ScanDisplayListW[V_Value][2]
			SLP_NEX_intrpt_ROIs(ROI_sel_txt)
			ROI_No=stringfromlist(j,ROI_sel_List)
			LegendString+="\\s("+TraceName+") "+ScanNote+" ROI"+ROI_No+"\r"
			j+=1
			
			ColorR=SLP_NEX_ROIColor[str2num(ROI_No)-1][0]-(SLP_NEX_ROIColor[str2num(ROI_No)-1][0]-MinColorRatio*SLP_NEX_ROIColor[str2num(ROI_No)-1][0])*(k-1)/k
			ColorG=SLP_NEX_ROIColor[str2num(ROI_No)-1][1]-(SLP_NEX_ROIColor[str2num(ROI_No)-1][1]-MinColorRatio*SLP_NEX_ROIColor[str2num(ROI_No)-1][1])*(k-1)/k
			ColorB=SLP_NEX_ROIColor[str2num(ROI_No)-1][2]-(SLP_NEX_ROIColor[str2num(ROI_No)-1][2]-MinColorRatio*SLP_NEX_ROIColor[str2num(ROI_No)-1][2])*(k-1)/k
			//Color intensity is darker, converging to MinColorRatio*ROI color (in the table) with more scans
			ModifyGraph rgb($TraceName)=(ColorR,ColorG,ColorB)
	EndFor
	
	LegendString=RemoveEnding(LegendString)
	SLP_NEX_FormatNEX("",-1)
	Legend LegendString
	Legend /A=RB
	ModifyGraph noLabel=0,margin=0,minor=1
End

Function SLP_NEX_UpdateBG()

	NVAR Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	//WAVE /T SLP_NEX_ScanParamListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanParamListW
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_BGListW=root:Package_SLP:NEXAFS:SLP_NEX_BGListW
	
	String W_Location=SLP_NEX_ScanListW[Scan_Sel][2]
	String ScanW_Name=SLP_NEX_ScanListW[Scan_Sel][3]
	String ScanW_FName=W_Location+":"+ScanW_Name
	String BG_FName=W_Location+":"+ScanW_Name+"_bg"
	String BGI0_FName=W_Location+":"+ScanW_Name+"_bgI0"
	String hvp_FName=W_Location+":"+ScanW_Name+"_hvp"
	string Org_BG_Name=SLP_NEX_ScanListW[Scan_Sel][5]
	string Org_BG_FName="root:Package_SLP:NEXAFS:Backgrounds:"+Org_BG_Name+"_ROI1"
	string Org_BGI0_FName="root:Package_SLP:NEXAFS:Backgrounds:"+Org_BG_Name+"_I0"
	
	//wave BG_W=$BG_FName
	//wave BGI0_W=$BGI0_FName
	wave Org_BG_W=$Org_BG_FName
	wave Org_BGI0_W=$Org_BGI0_FName
	wave hvp_W=$hvp_FName //processed hv wave (could be shifted or have different eV step than the orginal BG wave)
	
	variable i=0
	variable crnt_hv=0
	
	variable BG_sel=SLP_NEX_FindBGPos(Org_BG_Name)
	
	variable OrgBG_hvMin=str2num(SLP_NEX_BGListW[BG_sel][1])
	variable OrgBG_hvMax=str2num(SLP_NEX_BGListW[BG_sel][2])
	
	//Replace the BG wave (in case the x-scaling is changed during Recipe)
	Duplicate /O hvp_W,$BG_FName /Wave=BG_W
	Duplicate /O hvp_W,$BGI0_FName /Wave=BGI0_W
	
	For (i=0;i<dimsize(hvp_W,0);i+=1)
		crnt_hv=hvp_W[i]
		If (crnt_hv>=OrgBG_hvMin&&crnt_hv<=OrgBG_hvMax)
			BG_W[i]=Org_BG_W(crnt_hv) //find interpolated value (use () )
			BGI0_W[i]=Org_BGI0_W(crnt_hv)
		Else
			BG_W[i]=0
			BGI0_W[i]=1
		Endif
	EndFor

End


Function ListBoxProc_Recipe(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_NEX_ProcessScan(NEX_Scan_Sel)
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End


Function ListBoxProc_NEX_BGList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	WAVE /T SLP_NEX_BGListW=root:Package_SLP:NEXAFS:SLP_NEX_BGListW
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	string BG_Selection
	
	if (row!=-1&&row<dimsize(SLP_NEX_BGListW,0)) //Prevent users from clicking outside the ListW's range
	
		switch( lba.eventCode )
			case -1: // control being killed
				break
			case 4: // mouse down
				
				BG_Selection=SLP_NEX_BGListW[row][0]
				
				//Update selection to Scan Param List
				SLP_NEX_ScanListW[NEX_Scan_Sel][5]=BG_Selection
				
				//Update BG wave
				SLP_NEX_UpdateBG()
				
				//Process scan
				SLP_NEX_ProcessScan(NEX_Scan_Sel)
	
				break
				
			case 3: // double click
				break
			//case 4: // cell selection
			case 5: // cell selection plus shift key
				break
			case 6: // begin edit
				break
			case 7: // finish edit			
				break
			case 13: // checkbox clicked (Igor 6.2 or later)
				
				break
		endswitch
	else
		Listbox List0, SelRow=0
		//NEX_Scan_Sel=0
	endif
	
	return 0
End

Function SLP_NEX_FindBGPos(BG_Name)
	string BG_Name
	
	Wave /T SLP_NEX_BGListW=root:Package_SLP:NEXAFS:SLP_NEX_BGListW
	
	FindValue /TEXT=BG_Name SLP_NEX_BGListW
	variable col=floor(V_value/dimsize(SLP_NEX_BGListW,0))
	variable row=V_value-col*dimsize(SLP_NEX_BGListW,0)
	Return row
End

Function ListBoxProc_NEX_ScanList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	//WAVE /T SLP_NEX_ScanParamListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanParamListW
	
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	SVAR ROI_Sel_List=root:Package_SLP:NEXAFS:ROI_Sel_List
	NVAR NEX_Scan_Sel=root:Package_SLP:NEXAFS:NEX_Scan_Sel
	
	if (row!=-1&&row<dimsize(SLP_NEX_ScanListW,0)) //Prevent users from clicking outside the ListW's range
	
		switch( lba.eventCode )
			case -1: // control being killed
				break
			case 4: // mouse down
				
				SLP_NEX_PlotScan(row)
				//Update selection to global variable
				
				NEX_Scan_Sel=row
				
				//Show selected BG
				string BG_Name=SLP_NEX_ScanListW[row][5]
				variable BG_Sel=SLP_NEX_FindBGPos(BG_Name)
				ListBox List1 SelRow=BG_Sel
	
				break
				
			case 3: // double click
				break
			//case 4: // cell selection
			case 5: // cell selection plus shift key
				break
			case 6: // begin edit
				break
			case 7: // finish edit
				SLP_NEX_PlotScan(row)
			
				break
			case 13: // checkbox clicked (Igor 6.2 or later)
				SLP_NEX_PlotScanP1()
				
				break
		endswitch
	else
		Listbox List0, SelRow=0
		//NEX_Scan_Sel=0
	endif
	
	return 0
End

Function ButtonProc_NEX_LoadScans(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_NEX_LoadSingle("",1)
			
			NVAR NEX_InitFlg=root:Package_SLP:NEXAFS:NEX_InitFlg
			NEX_InitFlg=0
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_ModRecipe(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_NEX_CreateModRecipePanel()
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K SLP_NEX_Panel_01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K Modify_Recipe_Panel
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_Add(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_NEX_ModRcp("Add")
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_Remove(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_NEX_ModRcp("Remove")
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_MoveUp(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_NEX_ModRcp("MoveUp")
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_NEX_Recipe_MoveDown(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_NEX_ModRcp("MoveDown")
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End





Function SLP_NEX_SplitColumn(WaveLocation,ScanW_Name,ScanListPos)
	string WaveLocation,ScanW_Name
	variable ScanListPos
	
	WAVE /T SLP_NEX_ScanListW=root:Package_SLP:NEXAFS:SLP_NEX_ScanListW
	
	string Current_folder=getdatafolder(1)
	setDataFolder $WaveLocation
	
	string ScanW_FName=WaveLocation+":"+ScanW_Name
	Wave ScanW=$ScanW_FName
	wave SLP_NEX_DefaultRecipeW=root:Package_SLP:NEXAFS:SLP_NEX_DefaultRecipeW
	
	variable i=0
	string New_ScanW_Name=""
	string Suffix=""
	//string I0_WName=""
	string nrm_WName=""
	string prc_WName=""
	string phv_WName=""
	string BG_WName=""
	string BGI0_WName=""
	string Rcp_WName=""
	
	//Create recipe (copying from default recipe)
	Rcp_WName=ScanW_Name+"_rcp" //Recipe W
	Duplicate /O SLP_NEX_DefaultRecipeW, $Rcp_WName /Wave=Rcp_W //Recipe copied from Default
	
	For (i=0;i<dimsize(ScanW,1);i+=1)
		If (i==0)
			Suffix="_hv"
		ElseIf (i==1)
			Suffix="_Ie"
		ElseIf (i==2)
			Suffix="_I0"
		Elseif (i>2)
			Suffix="_ROI"+num2str(i-2)
		Endif
		New_ScanW_Name=ScanW_FName+Suffix
		Duplicate /O /R=[][i] ScanW,$New_ScanW_Name /Wave=New_ScanW
		Redimension /N=(dimsize(New_ScanW,0)) New_ScanW
				
		//Create Normalized NEXAFS spectrum for each ROI (divided by I0)
		if (i==0)
			//Processed energy scale (for shifting the x scale)
			Duplicate /O /R=[][i] New_ScanW,$(ScanW_Name+"_hvp") /Wave=hvp_ScanW
			//Background W
			Duplicate /O New_ScanW, $(ScanW_Name+"_bg") /Wave=Bg_ScanW //Background
			Bg_ScanW=0 //Set BG to zero (keep only the dimensions of the wave)
			//Background W
			Duplicate /O New_ScanW, $(ScanW_Name+"_bgI0") /Wave=BgI0_ScanW //Background
			BgI0_ScanW=1 //Set BG to zero (keep only the dimensions of the wave)
		Endif
		If (i>2) //Create Nrm and Prc waves
			Nrm_WName=ScanW_Name+Suffix+"_nrm" //I0 normed W
			Prc_WName=ScanW_Name+Suffix+"_prc" //Processed W
			
			Duplicate /O New_ScanW, $Nrm_WName /Wave=Nrm_ScanW //I0 normallized scan
			Wave I0_W=$(ScanW_Name+"_I0")
			Nrm_ScanW/=I0_W
			Duplicate /O New_ScanW, $Prc_WName /Wave=Prc_ScanW //Just copy for processing later
		Endif
	EndFor
	SLP_NEX_ProcessScan(dimsize(SLP_NEX_ScanListW,0)-1)
	setdatafolder $Current_folder
End






Function CheckProc00(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[0][0]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc10(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[1][0]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc20(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[2][0]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc01(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[0][1]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc11(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[1][1]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc21(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[2][1]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc02(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[0][2]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc12(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[1][2]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc22(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	WAVE SLP_NEX_PlotMatrix=root:Package_SLP:NEXAFS:SLP_NEX_PlotMatrix
	
	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_NEX_PlotMatrix[2][2]=checked
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function SLP_DXPS_DispPeakAssign(CursorHook_Flg)
	variable CursorHook_Flg
	variable BE_Window=1 //eV
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW	
	String VolName=SLP_DXPS_ScanListW[SelRow][0]
	
	Variable BE_Flg=str2num(SLP_DXPS_ScanListW[SelRow][26])
	Variable PeakAssign_Flg=str2num(SLP_DXPS_ScanListW[SelRow][27])
	Variable BE_Pos=str2num(SLP_DXPS_ScanListW[SelRow][28])
	Variable X_Pos=0
	
	variable STV_Begin=str2num(SLP_DXPS_ScanListW[SelRow][14])
	variable STV_End=str2num(SLP_DXPS_ScanListW[SelRow][15])
	variable hv=str2num(SLP_DXPS_ScanListW[SelRow][17])
	variable aWF=str2num(SLP_DXPS_ScanListW[SelRow][18])
	Variable MidBE=hv-aWF-(STV_Begin+STV_End)/2
	
	Variable KE_Pos=0
	
	If (PeakAssign_Flg)
		String TraceName=""
		//Check whether the x-scale is BE or KE
		If (BE_Flg) //BE is used
			TraceName=VolName+"_CmbndBE"
		Else //KE is used - change KE to BE
			TraceName=VolName+"_Cmbnd"
		Endif
		
		If (Numtype(BE_Pos)==2) //checked whether cursor position has been recorded
			SLP_DXPS_ScanListW[SelRow][28]=num2str(MidBE)
		EndIf

		If (!CursorHook_Flg) //If not used in cursor hook = change the cursor to the position
			If (BE_Flg==1)
				X_Pos=str2num(SLP_DXPS_ScanListW[SelRow][28])
			else
				X_Pos=hv-aWF-str2num(SLP_DXPS_ScanListW[SelRow][28])
			EndIf
			Cursor /W=SLP_DispXPS_Panel_01#DX_MergedSpectra A $TraceName X_Pos
		Endif

		X_Pos=xcsr(A,"SLP_DispXPS_Panel_01#DX_MergedSpectra")
		
		If (BE_Flg==1) //BE is used
			BE_Pos=X_Pos
			KE_Pos=hv-X_Pos-aWF
		Else //KE is used - change KE to BE
			BE_Pos=hv-X_Pos-aWF //convert to BE before looking up the BE table
			KE_Pos=X_Pos
		Endif
		
		SLP_DXPS_ScanListW[SelRow][28]=num2str(BE_Pos)
		TextBox /C/W=SLP_DispXPS_Panel_01#DX_MergedSpectra /N=PeakAssignment1  SLP_Util_FindElement(BE_Pos,BE_Window)
		TextBox /A=LT /C/W=SLP_DispXPS_Panel_01#DX_MergedSpectra /N=PeakAssignment2  SLP_Util_FindAuger(KE_Pos,BE_Window)
		
	Else
		Cursor /K/W=SLP_DispXPS_Panel_01#DX_MergedSpectra A
		TextBox/K/W=SLP_DispXPS_Panel_01#DX_MergedSpectra /N=PeakAssignment1	
		TextBox/K/W=SLP_DispXPS_Panel_01#DX_MergedSpectra /N=PeakAssignment2			
	EndIf

End



//Function SLP_DXPS_CreatePanel1() : Panel
//	
//	//Initialize DXPS procedures if it is the first time that this panel is used
//	If (!DataFolderExists("root:Package_SLP:DispXPS" ))
//		SLP_DXPS_init()
//	Endif
//	
//	//Util INIT (if not done so)
//	if (!DataFolderExists("root:Package_SLP:Util"))
//		SLP_Util_Init()
//	Endif
//
//	DoWindow /K SLP_DispXPS_Panel_01
//	PauseUpdate; Silent 1		// building window...
//	
//	//String PkgLocation="root:Package_SLP:DispXPS:"
//	
//	NewPanel /W=(73,75,898,675) /N=SLP_DispXPS_Panel_01
//	
//	SetDrawLayer UserBack
//	SetDrawEnv fsize= 14
//	DrawText 9,25,"Dispersive XPS data extraction"
//	DrawText 16,45,"Threshold"
//	DrawText 184,45,"Dispersive line"
//	DrawText 100,99,"variable /G"
//	DrawText 4,203,"Shifted individual spectra"
//	DrawText 7,407,"Merged spectrum"
//	DrawText 352,47,"2D unshifted spectra"
//	DrawText 530,360,"Disp. XPS scan list"
//	DrawText 524,44,"Dispersive line creation"
//	DrawText 528,203,"Energy correction"
//	DrawText 652,203,"XPS parameters"
//	
//	SetVariable SetVar_Threshold,pos={524,49},size={100,15},title="Threshold",proc=SetVarProc_DXPS_FindDispLine
//	SetVariable SetVar_Threshold,value= root:Package_SLP:DispXPS:Threshold
//	SetVariable SetVar_MinSize,pos={524,69},size={100,15},title="Min. Size",proc=SetVarProc_DXPS_FindDispLine
//	SetVariable SetVar_MinSize,value= root:Package_SLP:DispXPS:MinSize
//	SetVariable SetVar_Offset,pos={524,89},size={100,15},title="Offset",proc=SetVarProc_DXPS_PLine
//	SetVariable SetVar_Offset,value= root:Package_SLP:DispXPS:Offset
//	SetVariable SetVar_LPLength,pos={644,69},size={100,15},title="LP Length",proc=SetVarProc_DXPS_PLine
//	SetVariable SetVar_LPLength,value= root:Package_SLP:DispXPS:LPLength
//	SetVariable SetVar_LPWidth,pos={644,89},size={100,15},title="LP Width",proc=SetVarProc_DXPS_LPWidth
//	SetVariable SetVar_LPWidth,value= root:Package_SLP:DispXPS:LPWidth
//	SetVariable SetVar_NLines,pos={644,49},size={100,15},title="No. of Lines",proc=SetVarProc_DXPS_PLine
//	SetVariable SetVar_NLines,value= root:Package_SLP:DispXPS:NLines
//	SetVariable SetVar_DispFactor,pos={530,207},size={120,15},title="Disp. Factor",proc=SetVarProc_DXPS_EnCorrection
//	SetVariable SetVar_DispFactor,value= root:Package_SLP:DispXPS:DispFactor,limits={0.001,10,0.0005}
//	SetVariable SetVar_CenterPointX,pos={530,227},size={120,15},title="X\\B0",proc=SetVarProc_DXPS_EnCorrection
//	SetVariable SetVar_CenterPointX,value= root:Package_SLP:DispXPS:CenterPointX
//	SetVariable SetVar_CenterPointY,pos={530,247},size={120,15},title="Y\\B0",proc=SetVarProc_DXPS_EnCorrection
//	SetVariable SetVar_CenterPointY,value= root:Package_SLP:DispXPS:CenterPointY
//	
//	CheckBox CheckBox_PeakID,pos={210,390},size={105,16},fSize=10,title="Peak assignments",proc=CheckProc_DXPS_PkAsgn
//	CheckBox CheckBox_BE,pos={158,390},size={105,16},fSize=10,title="B.E.",proc=CheckProc_DXPS_BE
//	
//	ListBox List_ScansList,pos={530,369},size={274,180},mode=2,proc=ListBoxProc_ScanList
//	ListBox List_ScansList,ListWave=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
//	ListBox List_ScansList,SelWave=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
//	ListBox List_ScansList,widths={20,70,250,0,0,0,0,0,0,0,0,0,0,0,0,0}
//	ListBox List_XPSParam,pos={652,205},size={155,109},ListWave=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
//	ListBox List_XPSParam,widths={45,25,20},proc=ListBoxProc_DXPS_XPSParam
//	ListBox List_XPSParam,SelWave=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamSelW
//	
//	Button button1,pos={415,390},size={89,16},title="Plot",proc=ButtonProc_DXPS_ExpCmbnSpectrm
//	Button button1,fSize=10
//	Button Button_Done,pos={750,574},size={59,16},title="Done",proc=ButtonProc_DXPS_Done
//	Button Button_Done,fSize=10
//	Button Button_Correct1stInt,pos={265,186},size={117,16},title="Correct 1st intensity..",proc=ButtonProc_DXPS_Correct1stInt
//	Button Button_Correct1stInt,fSize=10
//	Button Button_SelAll,pos={530,551},size={82,20},title="Select all",proc=ButtonProc_DXPS_SelAll
//	Button Button_SelAll,fSize=10
//	Button Button_SelNone,pos={617,551},size={82,20},title="Select none",proc=ButtonProc_DXPS_SelNone
//	Button Button_SelNone,fSize=10
//	Button button6,pos={530,573},size={97,20},title="Delete selected..",proc=ButtonProc_DXPS_DelDataSet
//	Button button6,fSize=10
//	Button Button_Restore,pos={640,340},size={80,20},title="Restore data..",proc=ButtonProc_DXPS_RestoreRawData
//	Button Button_Restore,fSize=10
//	Button Button_LoadScan,pos={730,340},size={80,20},title="Load scan..",proc=ButtonProc_DXPS_LoadScan
//	Button Button_LoadScan,fSize=10
//	Button button8,pos={415,187},size={89,16},title="Plot"
//	Button button8,fSize=10
//	Button Button_DelRawData,pos={705,551},size={97,20},title="Remove raw data",proc=ButtonProc_DXPS_DelRawData
//	Button Button_DelRawData,fSize=10
//	
//	Button button_AutoScale,pos={317,390},size={97,16},proc=ButtonProc_DXPS,title="Reset scale",fSize=10
//	Button button_ExportSelected,pos={635,573},size={110,20},title="Export selected",proc=ButtonProc_DXPS_ExportSelected,fSize=10
//	Button Button_CopyDispL,pos={525,114},size={150,16},title="Copy dispersive line from..",proc=ButtonProc_DXPS_CopyDispL
//	Button Button_CopyDispL,fSize=10
//	Button Button_EditDispL ,pos={680,114},title="Manually edit disp. line",size={130,16},proc=ButtonProc_DXPS_EditDispL
//	Button Button_EditDispL,fSize=10
//	Button Button_CreateSpectra,pos={525,134}, size={270,16}, title="Create spectra",proc=ButtonProc_DXPS_CreateSpectra
//	Button Button_CreateSpectra,fSize=10
//
//	Wave SLP_DXPS_DummyImg1=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg1
//	Wave SLP_DXPS_DummyImg2=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg2
//	Wave SLP_DXPS_DummyImg3=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg3
//	Wave SLP_DXPS_DummySpectrum=root:Package_SLP:DispXPS:SLP_DXPS_DummySpectrum
//	
//	Display /W=(10,55,170,180)/HOST=SLP_DispXPS_Panel_01 /N=DX_ThImg 
//	Appendimage SLP_DXPS_DummyImg1
//	ModifyGraph tick=3,noLabel=2,standoff=0,margin=5
//	
//	Display /W=(180,55,340,180)/HOST=SLP_DispXPS_Panel_01 /N=DX_DispLineImg 
//	Appendimage SLP_DXPS_DummyImg2
//	ModifyGraph tick=3,noLabel=2,standoff=0,margin=5
//	
//	Display /W=(350,55,510,180)/HOST=SLP_DispXPS_Panel_01 /N=DX_2DSpectra 
//	Appendimage SLP_DXPS_DummyImg3
//	ModifyGraph tick=3,noLabel=2,standoff=0,margin=5
//	ModifyImage SLP_DXPS_DummyImg3 ctab= {*,*,Rainbow,0}
//	
//	Display/W=(5,206,504,384)/HOST=SLP_DispXPS_Panel_01 /N=DX_ShiftedSpectra SLP_DXPS_DummySpectrum
//	Modifygraph mirror=1,tick=2,minor=1
//	Label bottom "Start voltage (eV)"
//
//	Display/W=(6,410,504,589)/HOST=SLP_DispXPS_Panel_01 /N=DX_MergedSpectra SLP_DXPS_DummySpectrum
//	Modifygraph mirror=1,tick=2,minor=1
//	Label bottom "Start voltage (eV)"
//	
//	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
//	If (!stringmatch(SLP_DXPS_ScanListW[0][0],""))
//		SLP_DXPS_DisplaySelectedData(SLP_DXPS_ScanListW[0][0])
//		//Display 1st scan if there is already one
//	EndIf
//	
//	//Create hook
//	setwindow SLP_DispXPS_Panel_01,hook(PkAsgn)=SLP_DXPS_CursorHook
//	
//	//Colorize
//	modifypanel /W=SLP_DispXPS_Panel_01 cbRGB=(40000,50000,60000)
//	Modifygraph /W=SLP_DispXPS_Panel_01#DX_THIMG wbRGB=(37500,47500,60000)
//	Modifygraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg wbRGB=(37500,47500,60000)
//	Modifygraph /W=SLP_DispXPS_Panel_01#DX_2DSpectra wbRGB=(37500,47500,60000)
//	Modifygraph /W=SLP_DispXPS_Panel_01#DX_ShiftedSpectra wbRGB=(37500,47500,60000)
//	Modifygraph /W=SLP_DispXPS_Panel_01#DX_MergedSpectra wbRGB=(37500,47500,60000)
//	
//End

Function SLP_DXPS_init()
	//MODIFIED: 19.08.2020 (change default values for global variables, add new variables for batch loading)
	//DESCRIPTIONs: Initialize DXPS module
	string Current_folder=getdatafolder(1)
	NewDataFolder /O  root:Package_SLP
	NewDataFolder /O  root:Package_SLP:DispXPS
	
	SetDataFolder root:Package_SLP:DispXPS
	
	variable /G Threshold=2000
	variable /G MinSize=1000
	variable /G Offset=20
	variable /G LPLength=20
	variable /G LPWidth=5
	variable /G NLines=25
	variable /G DispFactor=0.0250
	variable /G CenterPointX=150
	variable /G CenterPointY=150	
	
	Make /O/T/N=(5,3) SLP_DXPS_XPSParamW
	SLP_DXPS_XPSParamW[0][0]="STV begin"
	SLP_DXPS_XPSParamW[1][0]="STV end"
	SLP_DXPS_XPSParamW[2][0]="STV step"
	SLP_DXPS_XPSParamW[3][0]="hv"
	SLP_DXPS_XPSParamW[4][0]="Analyser WF"
	SLP_DXPS_XPSParamW[4][1]="4.0"
	SLP_DXPS_XPSParamW[][2]="eV"
	Make /O/N=(5,3) SLP_DXPS_XPSParamSelW
	SLP_DXPS_XPSParamSelW[][1]=2
	SLP_DXPS_XPSParamSelW[1][1]=0
	
	Make /O/T/N=(0,64) SLP_DXPS_ScanListW
	SetDimLabel 1,0,ScanName,SLP_DXPS_ScanListW
	SetDimLabel 1,1,DataFolder,SLP_DXPS_ScanListW
	SetDimLabel 1,2,RawDataDir,SLP_DXPS_ScanListW
	SetDimLabel 1,3,DateModified,SLP_DXPS_ScanListW
	SetDimLabel 1,4,DateCreate,SLP_DXPS_ScanListW
	SetDimLabel 1,5,Threshold,SLP_DXPS_ScanListW
	SetDimLabel 1,6,MinSize,SLP_DXPS_ScanListW
	SetDimLabel 1,7,Offset,SLP_DXPS_ScanListW
	SetDimLabel 1,8,LPLength,SLP_DXPS_ScanListW
	SetDimLabel 1,9,LPWidth,SLP_DXPS_ScanListW
	SetDimLabel 1,10,NLines,SLP_DXPS_ScanListW
	SetDimLabel 1,11,DispFactor,SLP_DXPS_ScanListW
	SetDimLabel 1,12,CenterPointX,SLP_DXPS_ScanListW
	SetDimLabel 1,13,CenterPointY,SLP_DXPS_ScanListW
	SetDimLabel 1,14,STV_Start,SLP_DXPS_ScanListW
	SetDimLabel 1,15,STV_End,SLP_DXPS_ScanListW
	SetDimLabel 1,16,STV_Step,SLP_DXPS_ScanListW
	SetDimLabel 1,17,hv,SLP_DXPS_ScanListW
	SetDimLabel 1,18,AnalyserWF,SLP_DXPS_ScanListW
	SetDimLabel 1,19,x1,SLP_DXPS_ScanListW
	SetDimLabel 1,20,y1,SLP_DXPS_ScanListW
	SetDimLabel 1,21,x2,SLP_DXPS_ScanListW
	SetDimLabel 1,22,y2,SLP_DXPS_ScanListW
	SetDimLabel 1,23,Scan_Notes,SLP_DXPS_ScanListW
	SetDimLabel 1,24,CopiedDispL_Flg,SLP_DXPS_ScanListW
	SetDimLabel 1,25,RawDataDel_Flg,SLP_DXPS_ScanListW
	SetDimLabel 1,26,BE_Flg,SLP_DXPS_ScanListW
	SetDimLabel 1,27,PkAsgn_Flg,SLP_DXPS_ScanListW
	SetDimLabel 1,28,CursorPos,SLP_DXPS_ScanListW
	SetDimLabel 1,29,PT_XPS_Flg,SLP_DXPS_ScanListW //flag to display XPS line in PT
	SetDimLabel 1,30,PT_Auger_Flg,SLP_DXPS_ScanListW //flag to display Auger line in PT
	SetDimLabel 1,31,PT_Custom_Flg,SLP_DXPS_ScanListW //flag to display custom line in PT
	
	Make /O/T/N=(0,16) SLP_DXPS_ScanListDisplayW
	Make /O/N=(0,16) SLP_DXPS_ScanListDisplaySelW
	SLP_DXPS_ScanListDisplaySelW[][0]=32
	SetDimLabel 1,0,Sel,SLP_DXPS_ScanListDisplayW
	SetDimLabel 1,1,Scan_Name,SLP_DXPS_ScanListDisplayW
	SetDimLabel 1,2,Scan_Notes,SLP_DXPS_ScanListDisplayW
	
	Make /O/N=(5,5) SLP_DXPS_DummyImg1
	Make /O/N=(5,5) SLP_DXPS_DummyImg2
	Make /O/N=(5,5) SLP_DXPS_DummyImg3
	Make /O/N=(5) SLP_DXPS_DummySpectrum
	
	SLP_DXPS_CreateExpWave()
	Variable /G Exp_BGLowX
	Variable /G Exp_BGHighX
	Variable /G Exp_NrmPos
	Variable /G Exp_num
	String /G Exp_Name
	
	Variable /G UsePrevSetting_Flg=0
	
	//WAVE for batch loading
	Make /O/T/N=(0,8) SLP_DXPS_RawDataListW
	SetDimLabel 1,0,Sel,SLP_DXPS_RawDataListW
	SetDimLabel 1,1,Name,SLP_DXPS_RawDataListW
	SetDimLabel 1,2,Directory,SLP_DXPS_RawDataListW
	SetDimLabel 1,3,NoteForLoading,SLP_DXPS_RawDataListW
	SetDimLabel 1,4,DateCreated,SLP_DXPS_RawDataListW
	SetDimLabel 1,5,DateModified,SLP_DXPS_RawDataListW
	Make /O/N=(0,8) SLP_DXPS_RawDataListSelW
	String /G DXPS_MonitoredFolder //Saved raw data folder location
	Variable /G BGLevelCutoff=2000 //For automatic determination of threshold level of Disp. Line.
	Variable /G DispL_Theta=72 //Typicall dispersive line angle in Deg. 
	//NOTE: This is the angle of the disp. line with respect to x axis when the disp. line image is plotted with (0,0) on upper left
	Variable /G DispL_Scale=0.9 //Scaling factor for automatic Disp. Line creation to prevent it being larger than PEEM's screen.
	
	Setdatafolder $Current_folder
End

Function SLP_DXPS_CreatePanel1() : Panel
	//MODIFIED: 23.03.2021 - Add Realtime DXPS button
	//MODIFIED: 19.08.2020 
	//	- added Disp.Line Angle and option to use setting from previous scan when creating Disp. Line)
	//	- added Batch Loading button
	//	- Reverse axis for dispersive line display [put (0,0) to the top-left to make it the same as UView]
	//DESCRIPTIONs: Main panel for Disp. XPS

	//Initialize DXPS procedures if it is the first time that this panel is used
	If (!DataFolderExists("root:Package_SLP:DispXPS" ))
		SLP_DXPS_init()
	Endif
	//Util INIT (if not done so)
	if (!DataFolderExists("root:Package_SLP:Util"))
		SLP_Util_Init()
	Endif
	if (!DataFolderExists("root:Package_SLP:Util:PT"))
		SLP_Util_PT_Init()
	Endif
	
	Wave SLP_DXPS_DummyImg1=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg1
	Wave SLP_DXPS_DummyImg2=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg2
	Wave SLP_DXPS_DummyImg3=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg3
	Wave SLP_DXPS_DummySpectrum=root:Package_SLP:DispXPS:SLP_DXPS_DummySpectrum

	DoWindow /K SLP_DispXPS_Panel_01
	PauseUpdate; Silent 1		// building window...
	
	//String PkgLocation="root:Package_SLP:DispXPS:"
	
	NewPanel /W=(100,20,995,720) /N=SLP_DispXPS_Panel_01
	
	SetDrawLayer /W=SLP_DispXPS_Panel_01 UserFront
	SetDrawEnv /W=SLP_DispXPS_Panel_01 fsize= 14
	DrawText /W=SLP_DispXPS_Panel_01 9,25,"Dispersive XPS data extraction"
	
	//SET1: Images of the dispersive plane, dispersive line and 2D spectrum
	Variable Set1_XPos=5
	Variable Set1_YPos=45
	Variable Set1_Height=120
	
	SetDrawEnv /W=SLP_DispXPS_Panel_01 fsize= 12
	DrawText /W=SLP_DispXPS_Panel_01 Set1_XPos+10,Set1_YPos,"Threshold"
	DrawText /W=SLP_DispXPS_Panel_01 Set1_XPos+180,Set1_YPos,"Dispersive line"
	DrawText /W=SLP_DispXPS_Panel_01 Set1_XPos+345,Set1_YPos,"2D unshifted spectrum"

	Display /W=(10,Set1_YPos+5,170,Set1_YPos+Set1_Height)/HOST=SLP_DispXPS_Panel_01 /N=DX_ThImg 
	Appendimage /W=SLP_DispXPS_Panel_01#DX_ThImg SLP_DXPS_DummyImg1
	SetAxis /W=SLP_DispXPS_Panel_01#DX_ThImg /A/R left
	ModifyGraph /W=SLP_DispXPS_Panel_01#DX_ThImg tick=3,noLabel=2,standoff=0,margin=5
	
	Display /W=(180,Set1_YPos+5,340,Set1_YPos+Set1_Height)/HOST=SLP_DispXPS_Panel_01 /N=DX_DispLineImg 
	Appendimage /W=SLP_DispXPS_Panel_01#DX_DispLineImg SLP_DXPS_DummyImg2
	SetAxis /W=SLP_DispXPS_Panel_01#DX_DispLineImg /A/R left
	ModifyGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg tick=3,noLabel=2,standoff=0,margin=5
	
	Display /W=(350,Set1_YPos+5,505,Set1_YPos+Set1_Height)/HOST=SLP_DispXPS_Panel_01 /N=DX_2DSpectra 
	Appendimage /W=SLP_DispXPS_Panel_01#DX_2DSpectra SLP_DXPS_DummyImg3
	ModifyGraph /W=SLP_DispXPS_Panel_01#DX_2DSpectra tick=3,noLabel=2,standoff=0,margin=5
	ModifyImage /W=SLP_DispXPS_Panel_01#DX_2DSpectra SLP_DXPS_DummyImg3 ctab= {*,*,Rainbow,0}

	//SET2: Shifted individual spectra (for correcting with disp. factor) and combinded spectrum
	Variable Set2_XPos=Set1_XPos
	Variable Set2_YPos=190
	Variable Set2_Width=500
	Variable Set2_Height1=150
	Variable Set2_Height2=310
	Variable Set2_Spacing=6
	
	DrawText /W=SLP_DispXPS_Panel_01 Set2_XPos,Set2_YPos,"Shifted individual spectra"
	DrawText /W=SLP_DispXPS_Panel_01 Set2_XPos,Set2_YPos+6*Set2_Spacing+Set2_Height1,"Merged spectrum"
	
	Button Button_Correct1stInt,pos={Set2_XPos+175,Set2_YPos-15},size={117,16},title="Correct 1st intensity..",proc=ButtonProc_DXPS_Correct1stInt,fSize=10

	Display/W=(Set2_XPos,Set2_YPos+Set2_Spacing,Set2_XPos+Set2_Width,Set2_YPos+Set2_Spacing+Set2_Height1)/HOST=SLP_DispXPS_Panel_01 /N=DX_ShiftedSpectra SLP_DXPS_DummySpectrum
	Modifygraph mirror=1,tick=2,minor=1
	Label bottom "Start voltage (eV)"
	
	CheckBox CheckBox_PeakID,pos={Set2_XPos+170,Set2_YPos+6*Set2_Spacing+Set2_Height1-15},size={105,16},fSize=10,title="Peak assignments",proc=CheckProc_DXPS_PkAsgn
	CheckBox CheckBox_BE,pos={Set2_XPos+120,Set2_YPos+6*Set2_Spacing+Set2_Height1-15},size={105,16},fSize=10,title="B.E.",proc=CheckProc_DXPS_BE
	Button button_AutoScale,pos={Set2_XPos+310,Set2_YPos+6*Set2_Spacing+Set2_Height1-15},size={97,16},proc=ButtonProc_DXPS,title="Reset scale",fSize=10
	Button button_PlotSpecrum,pos={Set2_XPos+410,Set2_YPos+6*Set2_Spacing+Set2_Height1-15},size={89,16},title="Plot",proc=ButtonProc_DXPS,fSize=10
	
	Display/W=(Set2_XPos,Set2_YPos+6*Set2_Spacing+Set2_Height1+5,Set2_XPos+Set2_Width,Set2_YPos+6*Set2_Spacing+5+Set2_Height1+Set2_Height2)/HOST=SLP_DispXPS_Panel_01 /N=DX_MergedSpectra SLP_DXPS_DummySpectrum
	Modifygraph mirror=1,tick=2,minor=1
	Label bottom "Start voltage (eV)"

	//SET3: Dispersive line creation
	Variable Set3_XPos=525
	Variable Set3_YPos=Set1_YPos
	
	DrawText /W=SLP_DispXPS_Panel_01 Set3_XPos,Set3_YPos-25,"Dispersive line creation"
	
	Button Button_LoadBatch,pos={771.00,7.00},size={80.00,16.00},proc=ButtonProc_DXPS,title="Batch loading.."
	Button Button_LoadBatch,fSize=9
	CheckBox CheckBox_UsePrevSettingFlg,pos={684.00,24.00},size={179.00,16.00},proc=CheckProc_DXPS,title="User settings from the previous scan"
	CheckBox CheckBox_UsePrevSettingFlg,fSize=9
	CheckBox CheckBox_UsePrevSettingFlg,variable= root:Package_SLP:DispXPS:UsePrevSetting_Flg
	SetVariable SetVar_Angle,pos={526.00,26.00},size={150.00,14.00},proc=SetVarProc_DXPS_FindDispLine,title="Disp. line angle (deg.)"
	SetVariable SetVar_Angle,value= root:Package_SLP:DispXPS:DispL_Theta

	SetVariable SetVar_Threshold,pos={Set3_XPos,Set3_YPos+2},size={100,15},title="Threshold",proc=SetVarProc_DXPS_FindDispLine
	SetVariable SetVar_Threshold,value= root:Package_SLP:DispXPS:Threshold
	SetVariable SetVar_MinSize,pos={Set3_XPos,Set3_YPos+17},size={100,15},title="Min. Size",proc=SetVarProc_DXPS_FindDispLine
	SetVariable SetVar_MinSize,value= root:Package_SLP:DispXPS:MinSize
	
	SetVariable SetVar_Offset,pos={Set3_XPos+110,Set3_YPos+2},size={100,15},title="Offset",proc=SetVarProc_DXPS_PLine
	SetVariable SetVar_Offset,value= root:Package_SLP:DispXPS:Offset
	SetVariable SetVar_LPLength,pos={Set3_XPos+110,Set3_YPos+17},size={100,15},title="LP Length",proc=SetVarProc_DXPS_PLine
	SetVariable SetVar_LPLength,value= root:Package_SLP:DispXPS:LPLength
	
	SetVariable SetVar_NLines,pos={Set3_XPos+220,Set3_YPos+2},size={100,15},title="No. of Lines",proc=SetVarProc_DXPS_PLine
	SetVariable SetVar_NLines,value= root:Package_SLP:DispXPS:NLines
	SetVariable SetVar_LPWidth,pos={Set3_XPos+220,Set3_YPos+17},size={100,15},title="LP Width",proc=SetVarProc_DXPS_LPWidth
	SetVariable SetVar_LPWidth,value= root:Package_SLP:DispXPS:LPWidth
	
	Button Button_CopyDispL,pos={Set3_XPos,Set3_YPos+37},size={150,16},title="Copy dispersive line from..",proc=ButtonProc_DXPS_CopyDispL,fSize=10
	Button Button_EditDispL ,pos={Set3_XPos+160,Set3_YPos+37},title="Manually edit disp. line",size={130,16},proc=ButtonProc_DXPS_EditDispL,fSize=10
	Button Button_CreateSpectra,pos={Set3_XPos,Set3_YPos+55}, size={325,20}, title="Create spectra",proc=ButtonProc_DXPS_CreateSpectra,fSize=10
	
	//SET4: Disp. factor and XPS param.
	Variable Set4_XPos=525
	Variable Set4_YPos=150
	
	SetDrawLayer /W=SLP_DispXPS_Panel_01 UserBack
	SetDrawEnv /W=SLP_DispXPS_Panel_01 fsize= 12
	DrawText /W=SLP_DispXPS_Panel_01 Set4_XPos,Set4_YPos,"Energy correction"
	DrawText /W=SLP_DispXPS_Panel_01 Set4_XPos+125,Set4_YPos,"XPS parameters"
	
	SetVariable SetVar_DispFactor,pos={Set4_XPos,Set4_YPos+8},size={120,15},title="Disp. Factor",proc=SetVarProc_DXPS_EnCorrection
	SetVariable SetVar_DispFactor,value= root:Package_SLP:DispXPS:DispFactor,limits={-100,100,0.001}
	SetVariable SetVar_CenterPointX,pos={Set4_XPos,Set4_YPos+24},size={120,15},title="X\\B0",proc=SetVarProc_DXPS_EnCorrection
	SetVariable SetVar_CenterPointX,value= root:Package_SLP:DispXPS:CenterPointX
	SetVariable SetVar_CenterPointY,pos={Set4_XPos,Set4_YPos+40},size={120,15},title="Y\\B0",proc=SetVarProc_DXPS_EnCorrection
	SetVariable SetVar_CenterPointY,value= root:Package_SLP:DispXPS:CenterPointY
	
	ListBox List_XPSParam,pos={Set4_XPos+125,Set4_YPos+8},size={155,80},ListWave=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
	ListBox List_XPSParam,widths={45,25,20},proc=ListBoxProc_DXPS_XPSParam,SelWave=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamSelW
	
	Button Button_ShiftCmbndBELeft,pos={618,220},size={30,16},proc=ButtonProc_DXPS,title="<",fSize=8
	Button Button_ShiftCmbndBERight,pos={806,221},size={30,16},proc=ButtonProc_DXPS,title=">",fSize=8

	//SET5: Periodic table
	Variable Set5_XPos=525
	Variable Set5_YPos=260
	
	DrawText /W=SLP_DispXPS_Panel_01 Set5_XPos,Set5_YPos,"Display peaks from periodic table"
	
	SLP_Util_PT_AddPeriodicTable("SLP_DispXPS_Panel_01",Set5_XPos,Set5_YPos+5,1)
	
	Button Button_PT_Clear,pos={724,245},size={59,16},proc=ButtonProc_DXPS,title="Clear",fSize=10
	
	CheckBox CheckBox_Show_XPS,pos={632,267},size={36,15},proc=CheckProc_DXPS,title="XPS"
	CheckBox CheckBox_Show_XPS,fSize=10
	CheckBox CheckBox_Show_Auger,pos={632,283},size={47,15},proc=CheckProc_DXPS,title="Auger"
	CheckBox CheckBox_Show_Auger,fSize=10
	CheckBox CheckBox_Show_Custom,pos={689,267},size={55,15},proc=CheckProc_DXPS,title="Custom"
	CheckBox CheckBox_Show_Custom,fSize=10,value= 0
	Button Button_PT_CustomELine,pos={689,285},size={65,16},proc=ButtonProc_DXPS,title="Edit custom"
	Button Button_PT_CustomELine,fSize=10

	//SET6: ScanListW
	Variable Set6_XPos=525
	Variable Set6_YPos=425
	
	DrawText /W=SLP_DispXPS_Panel_01 Set6_XPos,Set6_YPos,"Disp. XPS scan list"
	
	ListBox List_ScansList,pos={Set6_XPos,Set6_YPos+8},size={355,220},mode=2,proc=ListBoxProc_DXPS_ScanList
	ListBox List_ScansList,ListWave=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	ListBox List_ScansList,SelWave=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	ListBox List_ScansList,widths={20,70,250,0,0,0,0,0,0,0,0,0,0,0,0,0}
	
	Button Button_LoadScan,pos={Set6_XPos+265,Set6_YPos-16},size={80,20},title="Load scan..",proc=ButtonProc_DXPS_LoadScan,fSize=10
	
	Button Button_SelAll,pos={Set6_XPos,Set6_YPos+235},size={82,16},title="Select all",proc=ButtonProc_DXPS_SelAll,fSize=10
	Button Button_SelNone,pos={Set6_XPos+85,Set6_YPos+235},size={82,16},title="Select none",proc=ButtonProc_DXPS_SelNone,fSize=10
	Button Button_DelRawData,pos={Set6_XPos+170,Set6_YPos+235},size={97,16},title="Remove raw data",proc=ButtonProc_DXPS_DelRawData,fSize=10
	Button Button_Restore,pos={Set6_XPos+270,Set6_YPos+235},size={80,16},title="Restore data..",proc=ButtonProc_DXPS_RestoreRawData,fSize=10
	
	Button Button_DeleteDataSet,pos={Set6_XPos,Set6_YPos+254},size={97,16},title="Delete selected..",proc=ButtonProc_DXPS_DelDataSet,fSize=10
	Button button_ExportSelected,pos={Set6_XPos+100,Set6_YPos+254},size={110,16},title="Export selected",proc=ButtonProc_DXPS_ExportSelected,fSize=10
	Button Button_Done,pos={813,Set6_YPos+254},size={59,16},title="Done",proc=ButtonProc_DXPS_Done,fSize=10
	
	Button Button_MoveUp,pos={646,413},size={58,16},proc=ButtonProc_DXPS,title="Move up",fSize=10
	Button Button_MoveDown,pos={706,413},size={70,16},proc=ButtonProc_DXPS,title="Move down",fSize=10
	Button Button_SelMulti,pos={736,679},size={73,16},proc=ButtonProc_DXPS,title="Select multi",fSize=10

	//[ADDED: 23.03.2021] - realtime DXPS
	Button Button_Realtime,pos={388.00,9.00},size={120.00,16.00},proc=ButtonProc_DXPS,title="Realtime monitoring.."
	Button Button_Realtime,fSize=9

	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	//If (!stringmatch(SLP_DXPS_ScanListW[0][0],"")) //[BUG] this generates error. Modify the condition to ScanList size (23.07.2020)
	If (dimsize(SLP_DXPS_ScanListW,0)!=0)
		SLP_DXPS_DisplaySelectedData(SLP_DXPS_ScanListW[0][0])
		//Display 1st scan if there is already one
	EndIf
	
	//Create hook
	setwindow SLP_DispXPS_Panel_01,hook(PkAsgn)=SLP_DXPS_CursorHook
	
	//Colorize
	modifypanel /W=SLP_DispXPS_Panel_01 cbRGB=(40000,50000,60000)
	Modifygraph /W=SLP_DispXPS_Panel_01#DX_THIMG wbRGB=(37500,47500,60000)
	Modifygraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg wbRGB=(37500,47500,60000)
	Modifygraph /W=SLP_DispXPS_Panel_01#DX_2DSpectra wbRGB=(37500,47500,60000)
	Modifygraph /W=SLP_DispXPS_Panel_01#DX_ShiftedSpectra wbRGB=(37500,47500,60000)
	Modifygraph /W=SLP_DispXPS_Panel_01#DX_MergedSpectra wbRGB=(37500,47500,60000)
	
End

Function Panel_DXPS_LoadBatch() : Panel
	//CREATED: 19.08.2020
	//DESCRIPTIONS: Panel for Batch loading for DispXPS
	PauseUpdate; Silent 1		// building window...
	DoWindow /K SLP_DXPS_LoadBatch_01
	NewPanel /N=SLP_DXPS_LoadBatch_01 /W=(169,293,932,693)
	ModifyPanel cbRGB=(40000,50000,60000)
	
	SetDrawLayer UserBack
	SetDrawEnv fsize= 16
	DrawText 8,32,"DXPS batch load"
	
	SetVariable setvar_BrowseDataFolder,pos={180.00,14.00},size={370.00,14.00},title="Data directory"
	SetVariable setvar_BrowseDataFolder,value= root:Package_SLP:DispXPS:DXPS_MonitoredFolder
	
	ListBox list_RawDataList,pos={6.00,40.00},size={748.00,325.00}
	ListBox list_RawDataList,listWave=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListW
	ListBox list_RawDataList,selWave=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListSelW
	ListBox list_RawDataList,mode= 9,widths={20,120,350,200} //[20201230a] Change from mode 3 to mode 9
	
	Button button_Browse,pos={556.00,11.00},size={64.00,21.00},proc=ButtonProc_DXPS_Batch,title="Browse.."
	Button button_Browse,fSize=10
	Button button_Refresh,pos={624.00,11.00},size={64.00,21.00},proc=ButtonProc_DXPS_Batch,title="Refresh"
	Button button_Refresh,fSize=10
	Button button_Sort,pos={691.00,11.00},size={64.00,21.00},proc=ButtonProc_DXPS_Batch,title="Sort.."
	Button button_Sort,fSize=10
	Button button_CheckAll,pos={280.00,370.00},size={75.00,20.00},proc=ButtonProc_DXPS_Batch,title="Check all"
	Button button_CheckAll,fSize=10
	Button button_CheckNone,pos={365.00,370.00},size={75.00,20.00},proc=ButtonProc_DXPS_Batch,title="Check none"
	Button button_CheckNone,fSize=10
	Button button_CheckSelected,pos={9.00,370.00},size={120.00,20.00},proc=ButtonProc_DXPS_Batch,title="Check selected"
	Button button_CheckSelected,fSize=10
	Button button_Load,pos={547.00,370.00},size={120.00,20.00},proc=ButtonProc_DXPS_Batch,title="Load.."
	Button button_Load,fSize=10
	Button button_Done,pos={678.00,370.00},size={75.00,20.00},proc=ButtonProc_DXPS_Batch,title="Done"
	Button button_Done,fSize=10
	Button button_UnCheckSelected,pos={137.00,370.00},size={120.00,20.00},proc=ButtonProc_DXPS_Batch,title="Uncheck selected"
	Button button_UnCheckSelected,fSize=10
	Button button_Remove,pos={462.00,370.00},size={75.00,20.00},proc=ButtonProc_DXPS_Batch,title="Remove"
	Button button_Remove,fSize=10
End

Function ButtonProc_DXPS_Batch(ba) : ButtonControl
	//CREATED: 17.08.2020
	//DESCRIPTIONS: Button proc for batch loading of DispXPS module
	
	STRUCT WMButtonAction &ba
	
	Wave /T SLP_DXPS_RawDataListW=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListW
	Wave SLP_DXPS_RawDataListSelW=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListSelW
	SVAR DXPS_MonitoredFolder=root:Package_SLP:DispXPS:DXPS_MonitoredFolder
	Variable i=0
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch with name of the control
				case "Button_CheckAll":		// execute if case matches expression
					//SLP_DXPS_RawDataListSelW[][0]=48
					SLP_DXPS_RawDataListSelW[][0]=SLP_DXPS_RawDataListSelW[p][0]|0x10 //[20201230a] Use bitwise operation instead 
					break
				case "Button_CheckNone":		// execute if case matches expression
					//SLP_DXPS_RawDataListSelW[][0]=32
					SLP_DXPS_RawDataListSelW[][0]=SLP_DXPS_RawDataListSelW[p][0]&~0x10 //[20201230a] Use bitwise operation instead 
					break
				case "Button_CheckSelected":		// execute if case matches expression
					//SLP_DXPS_RawDataListSelW[][0]=32+(SLP_DXPS_RawDataListSelW[p][0]==33||SLP_DXPS_RawDataListSelW[p][0]==49||SLP_DXPS_RawDataListSelW[p][0]==48)*16
					//[20201230a] Use bitwise operation instead 
					For (i=0;i<dimsize(SLP_DXPS_RawDataListSelW,0);i+=1)
						If (SLP_DXPS_RawDataListSelW[i][0]&0x09) //Check whether Bit 3 (Shift Selected) or Bit 0 (Selected) are '1'
							SLP_DXPS_RawDataListSelW[i][0]=SLP_DXPS_RawDataListSelW[i][0]|0x10
						EndIf
					EndFor
					break
				case "Button_UnCheckSelected":		// execute if case matches expression
					//SLP_DXPS_RawDataListSelW[][0]=32+(SLP_DXPS_RawDataListSelW[p][0]==48)*16
					//[20201230a] Use bitwise operation instead 
					For (i=0;i<dimsize(SLP_DXPS_RawDataListSelW,0);i+=1)
						If (SLP_DXPS_RawDataListSelW[i][0]&0x09) //Check whether Bit 3 (Shift Selected) or Bit 0 (Selected) are '1'
							SLP_DXPS_RawDataListSelW[i][0]=SLP_DXPS_RawDataListSelW[i][0]&~0x10
						EndIf
					EndFor
					break
				case "Button_Browse":
					GetFileFolderInfo /D/Q
					DXPS_MonitoredFolder=removeending(S_Path)
					SLP_DXPS_RefreshBatchList(DXPS_MonitoredFolder)
					break
				case "Button_Remove":
					For (i=dimsize(SLP_DXPS_RawDataListW,0)-1;i>=0;i-=1)
						If (SLP_DXPS_RawDataListSelW[i][0]==48||SLP_DXPS_RawDataListSelW[i][0]==49)
							If (Dimsize(SLP_DXPS_RawDataListW,0)>1)
								DeletePoints i,1, SLP_DXPS_RawDataListW
								DeletePoints i,1, SLP_DXPS_RawDataListSelW
							Else //If it is the last one
								Make /O/T/N=(0,8) root:Package_SLP:DispXPS:SLP_DXPS_RawDataListW /Wave=SLP_DXPS_RawDataListW
								SetDimLabel 1,0,Sel,SLP_DXPS_RawDataListW
								SetDimLabel 1,1,Name,SLP_DXPS_RawDataListW
								SetDimLabel 1,2,Directory,SLP_DXPS_RawDataListW
								SetDimLabel 1,3,Note,SLP_DXPS_RawDataListW
								Make /O/N=(0,8) root:Package_SLP:DispXPS:SLP_DXPS_RawDataListSelW
							EndIf
						EndIf
					EndFor
					break
				case "Button_Refresh":
					SLP_DXPS_RefreshBatchList(DXPS_MonitoredFolder)
					break
				case "Button_Load":
					SLP_DXPS_LoadBatch()
					break
				case "Button_Sort":
					SLP_DXPS_SortBatchList()
					break
				case "Button_Done":
					DoWindow /K SLP_DXPS_LoadBatch_01
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_RefreshBatchList(DXPS_Folder_Location)
	//CREATD: 17.08.2020
	//DESCRIPTIONS: Look up raw data folder to find DXPS scans and list them for batch loading (copied from NEXAFS)
	
	string DXPS_Folder_Location //Path to the NEXAFS data *w/o ":" at the end! If the location is "", then it will ask to choose a folder.
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	Wave /T SLP_DXPS_RawDataListW=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListW
	Wave SLP_DXPS_RawDataListSelW=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListSelW
	
	//If "", then ask to choose a folder.
	If (stringmatch(DXPS_Folder_Location,""))
		GetFileFolderInfo /D /Q
		DXPS_Folder_Location=S_Path
	Endif
	
	NewPath /Q /O SLP_DXPS_PathName, DXPS_Folder_Location
	
	string Current_ScanList=indexedDir(SLP_DXPS_PathName,-1,0)
	string NewScan_List=""
	String ScanName=""
	String DataDirectory=""
	String TxtDataList=""
	String ModifiedTimeString
	
	//Compare to see new scans
	variable i=0
	For (i=0;i<itemsinlist(Current_ScanList);i+=1)
		ScanName=StringFromList(i,Current_ScanList,";") //ScanName=FolderName
		DataDirectory=DXPS_Folder_Location+":"+ScanName
		NewPath /Q DXPS_DataPath,DataDirectory
		TxtDataList=IndexedFile(DXPS_DataPath, -1, ".txt")
		KillPath DXPS_DataPath
		If (WhichListItem(ScanName+".txt",TxtDataList)!=-1) 
		//Only include directory with matching .txt file (the scan name is the same as the directory name)
			FindValue /TEXT=ScanName /TXOP=6 SLP_DXPS_RawDataListW
			If (V_Value==-1)
				redimension /N=(dimsize(SLP_DXPS_RawDataListW,0)+1,dimsize(SLP_DXPS_RawDataListW,1)) SLP_DXPS_RawDataListW
				redimension /N=(dimsize(SLP_DXPS_RawDataListSelW,0)+1,dimsize(SLP_DXPS_RawDataListSelW,1)) SLP_DXPS_RawDataListSelW
				SLP_DXPS_RawDataListW[dimsize(SLP_DXPS_RawDataListW,0)-1][1]=ScanName //Raw data folder name (set by labview)
				SLP_DXPS_RawDataListW[dimsize(SLP_DXPS_RawDataListW,0)-1][2]=DXPS_Folder_Location+":"+ScanName //Location of the raw data
				GetFileFolderInfo /Q/Z (DXPS_Folder_Location+":"+ScanName+":"+ScanName+".txt" )
				SLP_DXPS_RawDataListW[dimsize(SLP_DXPS_RawDataListW,0)-1][4]=secs2date(V_creationDate,2)+" "+secs2time(V_creationDate,2)
				SLP_DXPS_RawDataListW[dimsize(SLP_DXPS_RawDataListW,0)-1][5]=secs2date(V_modificationDate,2)+" "+secs2time(V_modificationDate,2)
				sprintf ModifiedTimeString,"%d",V_modificationDate
				SLP_DXPS_RawDataListW[dimsize(SLP_DXPS_RawDataListW,0)-1][6]=ModifiedTimeString //For sorting
				
				SLP_DXPS_RawDataListSelW[dimsize(SLP_DXPS_RawDataListSelW,0)-1][0]=48
				SLP_DXPS_RawDataListSelW[dimsize(SLP_DXPS_RawDataListSelW,0)-1][3]=2
			Endif
		EndIf
	Endfor
End

Function SLP_DXPS_SortBatchList()
	//CREATED: 17.08.2020
	//Sort the raw data list in LoadBatch panel of DXPS (copied from NEXAFS batch loading panel)
	String SortByStr
	String Reverse_FlgStr
	Prompt SortByStr, "Sort column by", popup, "Scan name;Data location;LoadNote;Date"
	Prompt Reverse_FlgStr, "Reverse order", popup, "No;Yes"
	DoPrompt "Sorting..",SortByStr,Reverse_FlgStr
	
	Variable Reverse_Flg=stringmatch(Reverse_FlgStr,"Yes")
	
	Variable KeyColumn=0
	strswitch(SortByStr)	// string switch
		case "Scan name":		// execute if case matches expression
			KeyColumn=1
			break						// exit from switch
		case "Data location":		// execute if case matches expression
			KeyColumn=2
			break						// exit from switch
		case "LoadNote":		// execute if case matches expression
			KeyColumn=3
			break						// exit from switch
		case "Date":		// execute if case matches expression
			KeyColumn=6
			break	
	endswitch
	SLP_Util_SortMulti2DWaves("root:Package_SLP:DispXPS:SLP_DXPS_RawDataListW",KeyColumn,"root:Package_SLP:DispXPS:SLP_DXPS_RawDataListSelW","",Reverse_Flg)
End

Function SLP_DXPS_LoadBatch()
	//CREATED: 18.08.2020
	//DESCRIPTIONs: Batch loading from selected raw data in DXPS LoadBatch panel
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave /T SLP_DXPS_RawDataListW=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListW
	Wave SLP_DXPS_RawDataListSelW=root:Package_SLP:DispXPS:SLP_DXPS_RawDataListSelW
	Variable i=0
	String VolName
	
	For (i=0;i<dimsize(SLP_DXPS_RawDataListW,0);i+=1)
		//If (SLP_DXPS_RawDataListSelW[i][0]==48||SLP_DXPS_RawDataListSelW[i][0]==49)
		If (SLP_DXPS_RawDataListSelW[i][0]&0x10) //[20201230a] Use bitwise operation
			SLP_DXPS_LoadSingleScan(SLP_DXPS_RawDataListW[i][2],0)
			VolName=SLP_DXPS_RawDataListW[i][1]
			Variable DataRow=SLP_DXPS_FindDataRow(VolName)
			SLP_DXPS_RemoveRawData(VolName)
			SLP_DXPS_ScanListW[DataRow][25]="y"
			SLP_DXPS_DisplaySelectedData(VolName)
			DoUpdate
		EndIf
	EndFor

End



Function SLP_DXPS_AutoProcess(VolName,UsePrevSetting_Flg)
	//CREATED: 17.08.2020 (in ver. SLPA_Igor8_ce20200817a)
	//DESCRIPTIONS: Create XPS spectrum from the loaded raw data automatically.
	String VolName
	Variable UsePrevSetting_Flg
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	variable N_Scans=Dimsize(SLP_DXPS_ScanListW,0)
	
	Variable SelRow=SLP_DXPS_FindDataRow(VolName)
	
	NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	NVAR Offset=root:Package_SLP:DispXPS:Offset
	NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	NVAR NLines=root:Package_SLP:DispXPS:NLines
	
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR CenterPointY=root:Package_SLP:DispXPS:CenterPointY
	
	//For automatic Disp. Line 
	NVAR BGLevelCutoff=root:Package_SLP:DispXPS:BGLevelCutoff
	NVAR DispL_Theta=root:Package_SLP:DispXPS:DispL_Theta
	NVAR DispL_Scale=root:Package_SLP:DispXPS:DispL_Scale
	
	If (UsePrevSetting_Flg)
		String SrcScanName=SLP_DXPS_ScanListW[N_Scans-1][0]
		SLP_DXPS_CopyDispL(SrcScanName,VolName)
	Else
		//Find disp. line automatically
		Threshold=SLP_DXPS_SetTh_V2(VolName,-1,BGLevelCutoff) //Threshold = 0 = Automatically find Threshold
		SLP_DXPS_ScanListW[SelRow][5]=num2str(Threshold)
		SLP_DXPS_FindDispLine_v2(VolName,MinSize,DispL_Theta,DispL_Scale)
	EndIF
	
	SLP_DXPS_CreateMultiPLines(VolName,Offset,LPLength,NLines)
	SLP_DXPS_CreateSpectra(VolName,LPWidth)
	SLP_DXPS_MergeSpectra(VolName,CenterPointX,CenterPointY,DispFactor)
End

Function SLP_DXPS_SetTh_V2(VolName,Threshold,BGLevelCutoff)
	//CREATED: 17.08.2020
	//DESCRIPTIONs: Create Threshold Image W from Intg image. Can do auto thresholding by using 0 or -1 as Threshold.
	
	string VolName
	variable Threshold //If Threshold = 0 = Automatic 
	Variable BGLevelCutoff //Typical background level of the camera (normally ~ 1600)
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	Wave ImgVolW=$ImgVolW_FName
	Wave ImgVol_IntgW=$(ImgVolW_FName+"_Intg")
	
	Duplicate /O ImgVol_IntgW,$(ImgVolW_FName+"_Th") /WAVE=ImgVol_ThW
	
	If (Threshold>0)
		ImageThreshold/Q/O/I/T=(Threshold) ImgVol_ThW
	Elseif (Threshold==0) //Use histogram to find Threshold
		Duplicate /O ImgVol_IntgW,$(ImgVolW_FName+"_Intg_Smth") /WAVE=ImgVol_Intg_Smth
		MatrixFilter /P=2/N=3 median ImgVol_Intg_Smth //Remove noise by 3x3 median convolution (2 passes)
		//WaveStats /Q ImgVol_Intg_Smth
		ImageHistogram ImgVol_Intg_Smth
		Wave W_ImageHist
		CurveFit /Q gauss W_ImageHist[x2pnt(W_ImageHist,BGLevelCutoff),] /D 
		Wave W_coef
		Threshold=W_coef[2]-1.5*W_coef[3] //Set threshold to x0-1.5*FWHM
		ImageThreshold/Q/O/I/T=(Threshold) ImgVol_ThW
	Elseif (Threshold==-1) //Use line profile to find Threshold
		Duplicate /O ImgVol_IntgW,$(ImgVolW_FName+"_Intg_Smth") /WAVE=ImgVol_Intg_Smth
		MatrixFilter /P=2/N=3 median ImgVol_Intg_Smth //Remove noise by 3x3 median convolution (2 passes)
		Make /O/N=2 root:Package_SLP:DispXPS:LP_xWave /Wave=LP_xWave
		Make /O/N=2 root:Package_SLP:DispXPS:LP_yWave /Wave=LP_yWave
		//Create horizontal line (for current setup, dispersive line is mostly vertical)
		LP_xWave={pnt2x(ImgVol_Intg_Smth,0),pnt2x(ImgVol_Intg_Smth,DimSize(ImgVol_Intg_Smth,0)-1)}
		LP_yWave={pnt2x(ImgVol_Intg_Smth,round(DimSize(ImgVol_Intg_Smth,0)/2)),pnt2x(ImgVol_Intg_Smth,round(DimSize(ImgVol_Intg_Smth,0)/2))}
//		LP_xWave={0,DimSize(ImgVol_Intg_Smth,0)-1}
//		LP_yWave={round(DimSize(ImgVol_Intg_Smth,0)/2),round(DimSize(ImgVol_Intg_Smth,0)/2)}
		ImageLineProfile /SC xWave=LP_xWave, yWave=LP_yWave, srcWave=ImgVol_Intg_Smth, Width=20
		Killwaves LP_xWave
		Killwaves LP_yWave
		
		Wave W_imageLineProfile
		CurveFit /Q gauss W_imageLineProfile /D 
		Wave W_coef
		Threshold=W_coef[0]+0.10*W_coef[1] //Set threshold to 10% of the peak height
		ImageThreshold/Q/O/I/T=(Threshold) ImgVol_ThW
		
		//LP LPLength can also be estimated from the fitting
		//Set LP LPLength = W_coef[3]
		NVAR LPLength=root:Package_SLP:DispXPS:LPLength
		NVAR DispL_Theta=root:Package_SLP:DispXPS:DispL_Theta
		LPLength=W_coef[3]*sin(DispL_Theta*pi/180)
		SLP_DXPS_ScanListW[DataRow][8]=num2str(LPLength)
	EndIf
	
	Duplicate /O ImgVol_ThW,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg1
	Return Threshold
End

Function SLP_DXPS_FindDispLine_v2(VolName,MinSize,DispL_Theta,DispL_Scale)
	//CREATED: 17.08.2020
	//DESCRIPTIONs: From threshold image, do ImageParticleAnalysis to find the center position of the dispersive line. Then use specified Theta angle to generate the Disp. Line.
	string VolName
	variable MinSize
	Variable DispL_Theta
	Variable DispL_Scale
	
	variable FindDispLine_Err=0
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string ImgVol_IntgW_FName= ImgVolW_FName+"_Intg"
	string ImgVol_ThW_FName= ImgVolW_FName+"_Th"
	
	Wave ImgVol_IntgW=$ImgVol_IntgW_FName
	Wave ImgVol_ThW=$ImgVol_ThW_FName
	
	//Move to the data folder
	string CurrentFolder=GetDataFolder(1)
	setDataFolder SLP_DXPS_ScanListW[DataRow][1]
	
	ImageAnalyzeParticles /E/W/Q/EBPC/M=3/A=(MinSize)/F stats, ImgVol_ThW
	If (V_NumParticles!=1)
		//DoAlert 0,"Try adjusting Threshold Value or Min. Size"
		Print "Try adjusting Threshold Value or Min. Size"
		FindDispLine_Err=1
	Else
		string W_BoundaryX_FName=SLP_DXPS_ScanListW[DataRow][1]+"W_BoundaryX"
		string W_BoundaryY_FName=SLP_DXPS_ScanListW[DataRow][1]+"W_BoundaryY"
		string BoundX_W_Name=ImgVolW_FName+"_BX"
		string BoundY_W_Name=ImgVolW_FName+"_BY"
		
		duplicate /O $W_BoundaryX_FName,$BoundX_W_Name /WAVE=BX_W
		duplicate /O $W_BoundaryY_FName,$BoundY_W_Name /WAVE=BY_W
		killwaves $W_BoundaryX_FName
		killwaves $W_BoundaryY_FName
		
		Wave W_xMin
		Wave W_yMin
		Wave W_xMax
		Wave W_yMax
		
		Variable xMin=W_xMin[0]
		Variable xMax=W_xMax[0]
		Variable yMin=W_yMin[0]
		Variable yMax=W_yMax[0]
		Variable xCenter=(xMin+xMax)/2
		Variable yCenter=(yMin+yMax)/2
		Variable DispL_Length=sqrt((xMax-xMin)^2+(yMax-yMin)^2)*DispL_Scale
		
		//Create new X and Y waves from the fit result
		make /O /N=2 $(ImgVolW_FName+"_DispLX") /WAVE=DispLine_X_Wave
		make /O /N=2 $(ImgVolW_FName+"_DispLY") /WAVE=DispLine_Y_Wave
		DispLine_X_Wave[0]=xCenter-0.5*DispL_Length*cos(DispL_Theta*pi/180)
		DispLine_X_Wave[1]=xCenter+0.5*DispL_Length*cos(DispL_Theta*pi/180)
		DispLine_Y_Wave[0]=yCenter+0.5*DispL_Length*sin(DispL_Theta*pi/180)
		DispLine_Y_Wave[1]=yCenter-0.5*DispL_Length*sin(DispL_Theta*pi/180)
		
		//Update to ScanListW
		SLP_DXPS_ScanListW[DataRow][19]=num2str(DispLine_X_Wave[0]) //x1
		SLP_DXPS_ScanListW[DataRow][20]=num2str(DispLine_Y_Wave[0]) //y1
		SLP_DXPS_ScanListW[DataRow][21]=num2str(DispLine_X_Wave[1]) //x2
		SLP_DXPS_ScanListW[DataRow][22]=num2str(DispLine_Y_Wave[1]) //y2
	
		Duplicate /O ImgVol_IntgW,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg2
		
		//Remove all previous trace
		string TraceList=TraceNameList("SLP_DispXPS_Panel_01#DX_DispLineImg",";",1)
		string TraceName=""
		variable i=0
		For (i=0;i<ItemsInList(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveFromGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg $TraceName
		EndFor
		
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_DispLineImg BY_W vs BX_W
		ModifyGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg rgb=(0,43690,65535)
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_DispLineImg DispLine_Y_Wave vs DispLine_X_Wave
	EndIf
	
	//Go back to the previous folder
	SetDataFolder CurrentFolder
	
	Return FindDispLine_Err
End

Function SLP_DXPS_RemoveRawData(VolName)
	//CREATED: 17.08.2020 (Copied from ButtonProc)
	//DESCRIPTIONs: Remove DataVolW for DXPS to reduce memory load.
	
	String VolName
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	Wave ImgVolW=$ImgVolW_FName
	Killwaves ImgVolW
End

Function ButtonProc_DXPS(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	//MODIFIED: 19.08.2020
	//	- Add funtion for LoadBatch button (Panel_DXPS_LoadBatch())
	//DESCRIPTIONs: Main ButtonProc for DispXPS panel

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Variable AWF=0
			ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			strswitch(ba.CtrlName)	// string switch
				case "button_AutoScale":		// execute if case matches expression
					SetAxis /W=SLP_DispXPS_Panel_01#DX_SHIFTEDSPECTRA /A
					SetAxis /W=SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA /A
					ControlInfo /W=SLP_DispXPS_Panel_01 CheckBox_BE
					If (V_Value)
						SetAxis /W=SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA /A/R bottom
					EndIf
					break
				case "button_PT_clear":
					SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
					Wave /T PT_EList=root:Package_SLP:Util:PT:PT_EList
					PT_EList[][5]="0"
					Variable Set5_XPos=525
					Variable Set5_YPos=260					
					SLP_Util_PT_AddPeriodicTable("SLP_DispXPS_Panel_01",Set5_XPos,Set5_YPos+5,1) //Note the position
					//SLP_Util_LoadDB()
					SLP_Util_PT_GenXPSTag()
					break
				case "Button_ShiftCmbndBELeft":
					Wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
					AWF=str2num(SLP_DXPS_XPSParamW[4][1])-0.5
					SLP_DXPS_XPSParamW[4][1]=num2str(AWF)
					SLP_DXPS_ScanListW[SelRow][18]=num2str(AWF)
					SLP_DXPS_CreateBESpectrum()
					break
				case "Button_ShiftCmbndBERight":
					Wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
					AWF=str2num(SLP_DXPS_XPSParamW[4][1])+0.5
					SLP_DXPS_XPSParamW[4][1]=num2str(AWF)
					SLP_DXPS_ScanListW[SelRow][18]=num2str(AWF)
					SLP_DXPS_CreateBESpectrum()				
					break
				
				case "button_PlotSpecrum":
					SLP_DXPS_ExpCmbnSpectrm()
					break
				
				case "Button_PT_CustomELine":
					Panel_DXPS_CustomELine()
					break
				case "button_CustomE_done":
					Dowindow /K SLP_UTIL_CustomELine_Panel
					break
				case "button_CustomE_Save":
					break
				case "button_CustomE_Load":
					break
					
				case "Button_MoveUp":
					SLP_DXPS_MoveDataRow("Up")
					break
				case "Button_MoveDown":
					SLP_DXPS_MoveDataRow("Down")
					break
				case "Button_SelMulti":
					Panel_DXPS_ScanSelection()
					break
				case "Button_LoadBatch":
					Panel_DXPS_LoadBatch()
					break
				case "Button_Realtime": //[ADDED: 23.03.2021 - Realtime DXPS]
					Panel_DXPS_Realtime()
					Break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_MoveDataRow(MvDirection)
	String MvDirection
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_value
	Make /T/O/N=(1,dimsize(SLP_DXPS_ScanListW,1)) root:Package_SLP:DispXPS:ScanListSwapRow /Wave=ScanListSwapRow
	Make /T/O/N=(1,dimsize(SLP_DXPS_ScanListDisplayW,1)) root:Package_SLP:DispXPS:ScanListDispSwapRow /Wave=ScanListDispSwapRow
	Make /O/N=(1,dimsize(SLP_DXPS_ScanListDisplaySelW,1)) root:Package_SLP:DispXPS:ScanListDispSelSwapRow /Wave=ScanListDispSelSwapRow
	
	ScanListSwapRow=SLP_DXPS_ScanListW[SelRow][q]
	ScanListDispSwapRow=SLP_DXPS_ScanListDisplayW[SelRow][q]
	ScanListDispSelSwapRow=SLP_DXPS_ScanListDisplaySelW[SelRow][q]
	
	strswitch(MvDirection)	// string switch
		case "Up":
			If (SelRow>0)		
				SLP_DXPS_ScanListW[SelRow][]=SLP_DXPS_ScanListW[SelRow-1][q]
				SLP_DXPS_ScanListDisplayW[SelRow][]=SLP_DXPS_ScanListDisplayW[SelRow-1][q]
				SLP_DXPS_ScanListDisplaySelW[SelRow][]=SLP_DXPS_ScanListDisplaySelW[SelRow-1][q]
				SLP_DXPS_ScanListW[SelRow-1][]=ScanListSwapRow[0][q]
				SLP_DXPS_ScanListDisplayW[SelRow-1][]=ScanListDispSwapRow[0][q]
				SLP_DXPS_ScanListDisplaySelW[SelRow-1][]=ScanListDispSelSwapRow[0][q]
				ListBox List_ScansList win=SLP_DispXPS_Panel_01,SelRow=SelRow-1
			EndIf
			break						
		case "Down":
			If (SelRow<dimsize(SLP_DXPS_ScanListW,0)-1)
				SLP_DXPS_ScanListW[SelRow][]=SLP_DXPS_ScanListW[SelRow+1][q]
				SLP_DXPS_ScanListDisplayW[SelRow][]=SLP_DXPS_ScanListDisplayW[SelRow+1][q]
				SLP_DXPS_ScanListDisplaySelW[SelRow][]=SLP_DXPS_ScanListDisplaySelW[SelRow+1][q]
				SLP_DXPS_ScanListW[SelRow+1][]=ScanListSwapRow[0][q]
				SLP_DXPS_ScanListDisplayW[SelRow+1][]=ScanListDispSwapRow[0][q]
				SLP_DXPS_ScanListDisplaySelW[SelRow+1][]=ScanListDispSelSwapRow[0][q]
				ListBox List_ScansList win=SLP_DispXPS_Panel_01,SelRow=SelRow+1
			EndIf
			break						
	endswitch
End

Function Panel_DXPS_ScanSelection() : Panel
	Dowindow /K SLP_DXPS_ScanSelection01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(545,115,785,501) /N=SLP_DXPS_ScanSelection01
	ModifyPanel cbRGB=(40000,50000,60000)
	ListBox list_ScanSelection,pos={6,7},size={230,325}
	ListBox list_ScanSelection,listWave=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	ListBox list_ScanSelection,SelWave=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	ListBox list_ScanSelection,widths={20,70,250,0,0,0,0,0,0,0,0,0,0,0,0,0},mode= 4 //Can select many rows
	ListBox list_ScanSelection,userColumnResize= 1
	Button Button_UnSelHighlighted,pos={108,339},size={120,16},proc=ButtonProc_DXPS_ScanSelection,title="Unselect highlighted"
	Button Button_UnSelHighlighted,fSize=10
	Button Button_SelHighlighted,pos={6,338},size={100,16},proc=ButtonProc_DXPS_ScanSelection,title="Select highlighted"
	Button Button_SelHighlighted,fSize=10
	Button Button_Done,pos={176,358},size={50,16},proc=ButtonProc_DXPS_ScanSelection,title="Done"
	Button Button_Done,fSize=10
	Button Button_SelAll,pos={6,357},size={80,16},proc=ButtonProc_DXPS_ScanSelection,title="Select all"
	Button Button_SelAll,fSize=10
	Button Button_SelNone,pos={89,358},size={80,16},proc=ButtonProc_DXPS_ScanSelection,title="Select none"
	Button Button_SelNone,fSize=10
End

Function ButtonProc_DXPS_ScanSelection(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	//See 'Using Bitwise Operators' in igor help to see how to alter single bit regardless of others in SelWave.
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
			strswitch(ba.CtrlName)	// string switch
				case "Button_SelAll":
					SLP_DXPS_ScanListDisplaySelW[][0]=SLP_DXPS_ScanListDisplaySelW[p][0]|(0x10)
					break
				case "Button_SelNone":
					SLP_DXPS_ScanListDisplaySelW[][0]=SLP_DXPS_ScanListDisplaySelW[p][0]&~(0x10)
					break
				case "Button_SelHighlighted":
					SLP_DXPS_ScanListDisplaySelW[][0]=SLP_DXPS_ScanListDisplaySelW[p][0]|(0x10&((SLP_DXPS_ScanListDisplaySelW[p][0]&0x1)*0x10))
					//SEL|(0x10&((SEL&0x1)*0x10))
					break
				case "Button_UnSelHighlighted":
					SLP_DXPS_ScanListDisplaySelW[][0]=SLP_DXPS_ScanListDisplaySelW[p][0]&~(0x10&((SLP_DXPS_ScanListDisplaySelW[p][0]&0x1)*0x10))
					break
				case "Button_Done":
					Dowindow /K SLP_DXPS_ScanSelection01
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_DXPS_CursorHook(s) //HOOK FUNCTION to see spectrum at different (x,y) by moving a cursor

	STRUCT WMWinHookStruct &s
	Variable hookResult = 0
		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_DispXPS_Panel_01 activeSW
				String activeSubwindow = S_value
				
				//Hook for Display peak assignment
				if (CmpStr(activeSubwindow,"SLP_DispXPS_Panel_01#DX_MergedSpectra") == 0&&!stringmatch("",CsrInfo(A,"SLP_DispXPS_Panel_01#DX_MergedSpectra")))
					SLP_DXPS_DispPeakAssign(1) //use '1' for CursorHook
				Endif
				
				break
		endswitch

	return hookResult		// 0 if nothing done, else 1
End

Function SLP_DXPS_LoadSingleScan(RawDataFolder,Prompt_Flg)
	//MODIFIED: 06.04.2021 - Modify part of the code which checks for duplicate/illegal ScanName
	//MODIFIED: 30.09.2020 - Find Photon Energy in the .txt file
	//MODIFIED: 25.08.2020 - Now detects EELS scan (BIAS scan instead of STV scan)
	//CREATED: 17.08.2020 (in ver. SLPA_Igor8_ce20200817a) (Main code used to be inside Buttonproc)
	//DESCRIPTIONS: Load a DXPS scan into DispXPS module
	String RawDataFolder
	Variable Prompt_Flg
	
	Variable ContinueFlag=0
	
	If (StringMatch(RawDataFolder,""))
		GetFileFolderInfo /D/Q
		If (V_Flag!=-1) //If user doesn't click Cancel..
			RawDataFolder=S_Path
			ContinueFlag=1
		EndIf
	Else
		GetFileFolderInfo /D/Q RawDataFolder
		If (V_Flag==0) //If the specified folder is found
			ContinueFlag=1
		EndIf
	EndIf
	
	If (ContinueFlag!=0) //User select a folder
		NewPath /O DataPath,RawDataFolder
		Variable Duplicate_Flag=0
		wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
		wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
		wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
		wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
		
		String ScanNote="<Enter note here (optional)>"
		Variable hv=str2num(SLP_DXPS_XPSParamW[3][1]) //suggested value = previously used one
		
		//1st suggested name = folder name
		String VolName=StringFromList(ItemsInList(S_Path,":")-1,S_Path,":")
		VolName=SLP_Util_WNameSuggest(VolName,0,20)
		variable zStart
		variable zStep
		variable V_Flag1
		
		//Automatic search for parameter from the text file
		string FileList1=indexedfile(DataPath,-1,".txt")
		//If .txt file is found..
		If (Strlen(FileList1)) 
			String ParamFile_Name=stringfromlist(0,indexedfile(DataPath,-1,".txt"),";")
			String ParamFile_FName=S_Path+ParamFile_Name
			string ParamList=SLP_Util_ExtScanParam(File_FName=ParamFile_FName)
			zStart=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Start")),":")) //greplist is CASE SENSITIVE!
			If (numtype(zStart)==2) //If cannot find STV start)
				zStart=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"BIAS Start")),":")) //In case of EELS scan
			EndIf
			zStep=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Step")),":"))
			If (numtype(zStep)==2) //If cannot find STV start)
				zStep=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"BIAS Step")),":")) //In case of EELS scan
			EndIf
			hv=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"Photon Energy")),":"))
		EndIf
		
		If (Prompt_Flg)
			//Prompt for ScanName and other parameters
			Prompt VolName, "Wave name"
			prompt zStart, "Start voltage begin"
			prompt zStep, "Start voltage step"
			prompt hv, "Photon energy (hv)"
			prompt ScanNote, "Note"
			DoPrompt "Enter parameters", VolName,zStart,zStep,hv,ScanNote
			
			//[MODIFIED: 06.04.2021 - Make shorter code with Igor's CleanUpName and check DataFolderExists in root:Package_SLP:DispXPS instead of using FindText in ScanListW
			If (!V_Flag) //Users click ok
				Do
					If (!Stringmatch(VolName,CleanUpName(VolName,0))||datafolderexists("root:Package_SLP:DispXPS:"+VolName)) //Check if name is legal. CheckName returns 0 if it is ok.
						doalert 1,"Illegal or duplicated scan name. Do you want to choose a new scan name?"
						if (V_flag==2) //If users don't want to continue
							Return 0 //Exit
						Else
							Prompt VolName, "Scan name"
							DoPrompt "Enter a new name", VolName
							If (V_Flag)
								Return 0 //Exit
							EndIf
						EndIf	
					Endif
				While (!Stringmatch(VolName,CleanUpName(VolName,0))||datafolderexists("root:Package_SLP:DispXPS:"+VolName))
			EndIf
				
//				Prompt VolName, "Wave name"
//				prompt zStart, "Start voltage begin"
//				prompt zStep, "Start voltage step"
//				prompt hv, "Photon energy (hv)"
//				prompt ScanNote, "Note"
//				DoPrompt "Enter parameters", VolName,zStart,zStep,hv,ScanNote
//				V_Flag1=V_Flag //Need to copy V_Flag from DoPrompt to V_Flag1 before it is overwritten by DoAlert
//				
//				//Prevent user from using non-standard wave names
//				If (SLP_Util_WNameCheck(VolName,20)&&!V_Flag1)
//					DoAlert 0,"Scan name must be\r- No special characters\r- Starts with an alphabet\r- Less than 20 chars."
//					//Limit to 20 characters because the procedure will create processed data waves with description tags (_xxx) added to the ScanName.
//				Endif
//				
//				FindValue /TXOP=2 /TEXT=VolName SLP_DXPS_ScanListW
//				If (V_Value==-1) //Not duplicate
//					Duplicate_Flag=0
//				Else
//					Duplicate_Flag=1
//				Endif
//				
//				If (Duplicate_Flag)
//					DoAlert 0,"Duplicate scan name"
//				Endif
//			While (Duplicate_Flag||(SLP_Util_WNameCheck(VolName,20)&&!V_Flag1)) //Loope until user makes a good name or click Cancel
		EndIf
			
//		If (!V_Flag||!Prompt_Flg) //User click continue or Auto Load
			
			string CurrentFolder=GetDataFolder(1)
			string PkgFolder_FName="root:Package_SLP:DispXPS:"+VolName
			NewDataFolder /O $PkgFolder_FName //Location in Pkg Folder to store scan parameters
			//NewDataFolder /O $VolName
			SetDataFolder $PkgFolder_FName //Save raw data here
			
			//Load series of images to a 3d volume [CODE:SLP_Util_LoadMultImg2Vol]
			SLP_Util_LoadMultImg2Vol(S_Path,VolName,zStart,zStep)
			
			string NewImgVolW_FName=PkgFolder_FName+":"+VolName 
			Wave NewImgVolW=$NewImgVolW_FName
			
			//Initialize dispersive line (vertical line in the middle)
			String DispLX_W_FName=NewImgVolW_FName+"_DispLX"
			String DispLY_W_FName=NewImgVolW_FName+"_DispLY"
			
			Make /O/N=2 $DispLX_W_FName /WAVE=DispLX
			Make /O/N=2 $DispLY_W_FName /WAVE=DispLY
			DispLX=Dimsize(NewImgVolW,0)/2
			DispLY={Dimsize(NewImgVolW,1),0} //**Direction matters here!** -start from bottom to top-
			
			//Find no. of step
			variable N_Steps=dimsize(NewImgVolW,2)
			
			variable N_Scans=Dimsize(SLP_DXPS_ScanListW,0)
			redimension /N=(dimsize(SLP_DXPS_ScanListW,0)+1,dimsize(SLP_DXPS_ScanListW,1)) SLP_DXPS_ScanListW
			redimension /N=(dimsize(SLP_DXPS_ScanListDisplayW,0)+1,dimsize(SLP_DXPS_ScanListDisplayW,1)) SLP_DXPS_ScanListDisplayW
			redimension /N=(dimsize(SLP_DXPS_ScanListDisplaySelW,0)+1,dimsize(SLP_DXPS_ScanListDisplaySelW,1)) SLP_DXPS_ScanListDisplaySelW
			
			NVAR Threshold=root:Package_SLP:DispXPS:Threshold
			NVAR MinSize=root:Package_SLP:DispXPS:MinSize
			NVAR Offset=root:Package_SLP:DispXPS:Offset
			NVAR LPLength=root:Package_SLP:DispXPS:LPLength
			NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
			NVAR NLines=root:Package_SLP:DispXPS:NLines
			
			NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
			NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
			NVAR CenterPointY=root:Package_SLP:DispXPS:CenterPointY
			
			SLP_DXPS_ScanListW[N_Scans][0]=VolName //Name of the scan (= wave name)
			//SLP_DXPS_ScanListW[N_Scans][1]=CurrentFolder+VolName+":" //Change to Package_SLP:DispXPS folder to prevent clutters..
			SLP_DXPS_ScanListW[N_Scans][1]="root:Package_SLP:DispXPS:"+VolName+":" //Where the Raw file is saved
			SLP_DXPS_ScanListW[N_Scans][2]=S_Path //The raw data directory on the computer
			SLP_DXPS_ScanListW[N_Scans][3]=secs2date(V_modificationDate,2)+" "+secs2time(V_modificationDate,2)
			SLP_DXPS_ScanListW[N_Scans][4]=secs2date(V_creationDate,2)+" "+secs2time(V_creationDate,2)
			SLP_DXPS_ScanListW[N_Scans][5]=num2str(Threshold)
			SLP_DXPS_ScanListW[N_Scans][6]=num2str(MinSize)
			SLP_DXPS_ScanListW[N_Scans][7]=num2str(Offset)
			SLP_DXPS_ScanListW[N_Scans][8]=num2str(LPLength)
			SLP_DXPS_ScanListW[N_Scans][9]=num2str(LPWidth)
			SLP_DXPS_ScanListW[N_Scans][10]=num2str(NLines)
			SLP_DXPS_ScanListW[N_Scans][11]=num2str(DispFactor)
			SLP_DXPS_ScanListW[N_Scans][12]=num2str(CenterPointX)
			SLP_DXPS_ScanListW[N_Scans][13]=num2str(CenterPointY)
			SLP_DXPS_ScanListW[N_Scans][14]=num2str(zStart)
			SLP_DXPS_ScanListW[N_Scans][15]=num2str(zStart+(N_steps-1)*zStep)
			SLP_DXPS_ScanListW[N_Scans][16]=num2str(zStep)
			SLP_DXPS_ScanListW[N_Scans][17]=num2str(hv)
			SLP_DXPS_ScanListW[N_Scans][18]=SLP_DXPS_XPSParamW[4][1]
			//[MODIFIED: 06.04.2021] - Automatically generate BE plot
			SLP_DXPS_ScanListW[N_Scans][26]="1" //BE Flag
			SLP_DXPS_ScanListW[N_Scans][27]="0" //Peak assignment Flag
			//SLP_DXPS_ScanListW[N_Scans][28]="0.0" //CURSOR POS
			SLP_DXPS_ScanListW[N_Scans][29]="1" //Display XPS in PT by default
			SLP_DXPS_ScanListW[N_Scans][30]="0" //Not display Auger in PT by default
			
			SLP_DXPS_ScanListDisplayW[N_Scans][1]=VolName
			SLP_DXPS_ScanListDisplayW[N_Scans][2]=ScanNote
			SLP_DXPS_ScanListDisplaySelW[N_Scans][0]=32
			SLP_DXPS_ScanListDisplaySelW[N_Scans][2]=2
			
			SLP_DXPS_XPSParamW[0][1]=num2str(zStart)
			SLP_DXPS_XPSParamW[1][1]=num2str(zStart+(N_steps-1)*zStep)
			SLP_DXPS_XPSParamW[2][1]=num2str(zStep)
			
			ListBox List_ScansList, SelRow=N_Scans, Win=SLP_DispXPS_Panel_01
			SLP_DXPS_DisplaySelectedData(VolName)
			SLP_Util_RemoveAllTraces("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
			
			SLP_Util_PlayAlert() //Warn when loading has finished
			
			SLP_DXPS_TgglControls("Enable")
			//Listbox List_ScansList win=SLP_DispXPS_Panel_01, selrow=N_Scans
			
			SetDataFolder CurrentFolder
			//Raw data loading finishes
			
			//Automatically process data after finish loading
			NVAR UsePrevSetting_Flg=root:Package_SLP:DispXPS:UsePrevSetting_Flg //TO BE CHANGED TO GLOBAL VARIABLE
			SLP_DXPS_AutoProcess(VolName,UsePrevSetting_Flg)
//		EndIf
	EndIf
End

Function SLP_DXPS_DelScan(VolName)
	String VolName
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	
	String DataFolder_FName=SLP_DXPS_ScanListW[DataRow][1]
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string CombinedSpectraW_FName=ImgVolW_FName+"_Cmbnd"
	string CombinedSpectraBEW_FName=ImgVolW_FName+"_CmbndBE"
	
	//Remove dependency before deletion
	If (exists(CombinedSpectraW_FName))
		SetFormula $CombinedSpectraW_FName,""
	EndIf
	If (exists(CombinedSpectraBEW_FName))
		SetFormula $CombinedSpectraBEW_FName,""
	EndIf
	killDataFolder $DataFolder_FName
	variable DeleteFolderError_Flg=V_Flag
	
	if (DeleteFolderError_Flg==0) 
		//Only update ScanListW if Image folder can be deleted
		DeletePoints DataRow,1, SLP_DXPS_ScanListW
		DeletePoints DataRow,1, SLP_DXPS_ScanListDisplayW
		DeletePoints DataRow,1, SLP_DXPS_ScanListDisplaySelW
	Endif
	Return DeleteFolderError_Flg
End

Function SLP_DXPS_DelScanBatch()
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	
	variable i=0
	String VolName=""
	variable DelError=0
	String ErrorTxt=""
	String WarnTxt=""
	
	For (i=0;i<dimsize(SLP_DXPS_ScanListDisplaySelW,0);i+=1)
		If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49)
			VolName=SLP_DXPS_ScanListW[i][0]
			WarnTxt="Delete scan: "+VolName+" ?"
			DoAlert 1,WarnTxt
			
			If (V_flag==1) //If user clicks 'Yes'			
				DelError=SLP_DXPS_DelScan(VolName)
				i-=1 //Go back one row
			EndIf
			
			If (DelError)
				ErrorTxt="Error deleting scan: "+VolName+"\r wave(s) in the dataset are being used somewhere in the current project"
				DoAlert 0,ErrorTxt
			Endif
			DoUpdate
		Endif
	EndFor
End

Function ButtonProc_DXPS_DelDataSet(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
			
			//Find the current selected row
		  	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			
			//Change dataset selection if the current one is going to be delected
			if (SLP_DXPS_ScanListDisplaySelW[SelRow][0]==48)
				//Find the first non-selected DataSet from the top	
				variable i=0
				For (i=0;i<dimsize(SLP_DXPS_ScanListDisplaySelW,0)&&(SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49);i+=1)
					DoUpdate
				Endfor
				//i is now the index of the first non-selected DataSet
				
				If (i<dimsize(SLP_DXPS_ScanListDisplaySelW,0))
					ListBox List_ScansList SelRow=i,Win=SLP_DispXPS_Panel_01
					SLP_DXPS_DisplaySelectedData(SLP_DXPS_ScanListW[i][0])
				Else //All datasets have been selected
					SLP_DXPS_init()
				Endif
			endif
			
			SLP_DXPS_DelScanBatch()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_EditDispLine()
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	//Find the current selected row
  	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	
	string DataFolder=SLP_DXPS_ScanListW[SelRow][1]
	string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
	string ImgVol_IntgW_FName= ImgVolW_FName+"_Intg"
	string DispLine_XWave_FName=ImgVolW_FName+"_DispLX"
	string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
	
	Wave ImgVol_IntgW=$ImgVol_IntgW_FName
	Wave DispLine_XWave=$DispLine_XWave_FName
	Wave DispLine_YWave=$DispLine_YWave_FName
	
	DoWindow /K Edit_DispL
	Display /N=Edit_DispL 
	AppendImage ImgVol_IntgW
	Setaxis /W=Edit_DispL /A/R left
	string ImgList=ImageNameList("Edit_DispL",";")
	string ImgName=stringFromList(0,ImgList)
	ModifyImage $ImgName ctab= {*,*,YellowHot,1}
	AppendToGraph /W=Edit_DispL DispLine_YWave vs DispLine_XWave
	ModifyGraph /W=Edit_DispL lsize=3,rgb=(32768,54615,65535),WbRGB=(60000,60000,60000)
	Modifygraph /W=Edit_DispL margin(left)=30,margin(right)=30,mirror=1,fsize=8
	Modifygraph /W=Edit_DispL margin(top)=40,margin(bottom)=40,width=300,height=280,minor=1,standoff=0
	//ModifyGraph /W=Edit_DispL width=0,height=0
	
	Button Button_EdtDispL_EditDispL,pos={40,5},size={120,16},title="Edit dispersive line",fsize=10,proc=ButtonProc_EdtDispL_EditDispL
	Button Button_EdtDispL_Undo,pos={180,5},size={50,16},title="Undo",fsize=10,proc=ButtonProc_EdtDispL_Undo
	Button Button_EdtDispL_Save,pos={240,5},size={50,16},title="Save",fsize=10,proc=ButtonProc_EdtDispL_Save
	Button Button_EdtDispL_Cancel,pos={300,5},size={50,16},title="Cancel",fsize=10,proc=ButtonProc_EdtDispL_Cancel
End

Function ButtonProc_EdtDispL_EditDispL(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			string DataFolder=SLP_DXPS_ScanListW[SelRow][1]
			string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
			string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
			Wave DispLine_YWave=$DispLine_YWave_FName
			
			string TraceList=TraceNameList("Edit_DispL",";",1)
			string TraceName=stringFromList(0,TraceList)
			
			GraphWaveEdit /NI $TraceName
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_EdtDispL_Undo(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			string DataFolder=SLP_DXPS_ScanListW[SelRow][1]
			string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
			string DispLine_XWave_FName=ImgVolW_FName+"_DispLX"
			string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
	
			Wave DispLine_XWave=$DispLine_XWave_FName
			Wave DispLine_YWave=$DispLine_YWave_FName
			
			//Save new Disp. line coord. to ScanListW
			DispLine_XWave[0]=str2num(SLP_DXPS_ScanListW[SelRow][19])
			DispLine_YWave[0]=str2num(SLP_DXPS_ScanListW[SelRow][20])
			DispLine_XWave[1]=str2num(SLP_DXPS_ScanListW[SelRow][21])
			DispLine_YWave[1]=str2num(SLP_DXPS_ScanListW[SelRow][22])
			
			GraphNormal

			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_EdtDispL_Save(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			string ImgVolW_Name=SLP_DXPS_ScanListW[SelRow][0]
			string DataFolder=SLP_DXPS_ScanListW[SelRow][1]
			string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
			string DispLine_XWave_FName=ImgVolW_FName+"_DispLX"
			string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
	
			Wave DispLine_XWave=$DispLine_XWave_FName
			Wave DispLine_YWave=$DispLine_YWave_FName
			
			//Save new Disp. line coord. to ScanListW
			SLP_DXPS_ScanListW[SelRow][19]=num2str(DispLine_XWave[0])
			SLP_DXPS_ScanListW[SelRow][20]=num2str(DispLine_YWave[0])
			SLP_DXPS_ScanListW[SelRow][21]=num2str(DispLine_XWave[1])
			SLP_DXPS_ScanListW[SelRow][22]=num2str(DispLine_YWave[1])
			
			//Change colour of the Th, MinSize controls to indicate that the Disp.L has been manually edited
			SetVariable  SetVar_Threshold valueColor=(39321,39321,39321),win=SLP_DispXPS_Panel_01
  			SetVariable SetVar_MinSize valueColor=(39321,39321,39321),win=SLP_DispXPS_Panel_01
			SLP_DXPS_ScanListW[SelRow][24]="y"
			
			//Run find P. Lines
			NVAR Offset=root:Package_SLP:DispXPS:Offset
			NVAR LPLength=root:Package_SLP:DispXPS:LPLength
			NVAR NLines=root:Package_SLP:DispXPS:NLines
			SLP_DXPS_CreateMultiPLines(ImgVolW_Name,Offset,LPLength,NLines)
			
			GraphNormal
			DoWindow/K Edit_DispL
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_EdtDispL_Cancel(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			// click code here
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			string DataFolder=SLP_DXPS_ScanListW[SelRow][1]
			string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
			string DispLine_XWave_FName=ImgVolW_FName+"_DispLX"
			string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
	
			Wave DispLine_XWave=$DispLine_XWave_FName
			Wave DispLine_YWave=$DispLine_YWave_FName
			
			//Save new Disp. line coord. to ScanListW
			DispLine_XWave[0]=str2num(SLP_DXPS_ScanListW[SelRow][19])
			DispLine_YWave[0]=str2num(SLP_DXPS_ScanListW[SelRow][20])
			DispLine_XWave[1]=str2num(SLP_DXPS_ScanListW[SelRow][21])
			DispLine_YWave[1]=str2num(SLP_DXPS_ScanListW[SelRow][22])
			
			GraphNormal
			DoWindow/K Edit_DispL
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function /S SLP_DXPS_CreateNotes(ScanName)
	String ScanName
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	Variable DataRow=SLP_DXPS_FindDataRow(ScanName)
	
	String DXPS_Notes=""
	DXPS_Notes+="\rExtraction parameters"
	DXPS_Notes+="\rScan name: "+SLP_DXPS_ScanListW[DataRow][0]
	DXPS_Notes+="\rData folder: "+SLP_DXPS_ScanListW[DataRow][1]
	DXPS_Notes+="\rRaw data directory: "+SLP_DXPS_ScanListW[DataRow][2]
	DXPS_Notes+="\rDate modified: "+SLP_DXPS_ScanListW[DataRow][3]
	DXPS_Notes+="\rDate create: "+SLP_DXPS_ScanListW[DataRow][4]
	DXPS_Notes+="\rThreshold: "+SLP_DXPS_ScanListW[DataRow][5]
	DXPS_Notes+="\rMin. size: "+SLP_DXPS_ScanListW[DataRow][6]
	DXPS_Notes+="\rOffset: "+SLP_DXPS_ScanListW[DataRow][7]
	DXPS_Notes+="\rLPLength: "+SLP_DXPS_ScanListW[DataRow][8]
	DXPS_Notes+="\rLPWidth: "+SLP_DXPS_ScanListW[DataRow][9]
	DXPS_Notes+="\rNo. of LP lines: "+SLP_DXPS_ScanListW[DataRow][10]
	DXPS_Notes+="\rDispersion factor: "+SLP_DXPS_ScanListW[DataRow][11]
	DXPS_Notes+="\rx0: "+SLP_DXPS_ScanListW[DataRow][12]
	DXPS_Notes+="\ry0: "+SLP_DXPS_ScanListW[DataRow][13]
	DXPS_Notes+="\rSTV start: "+SLP_DXPS_ScanListW[DataRow][14]
	DXPS_Notes+="\rSTV end: "+SLP_DXPS_ScanListW[DataRow][15]
	DXPS_Notes+="\rSTV step: "+SLP_DXPS_ScanListW[DataRow][16]
	DXPS_Notes+="\rhv: "+SLP_DXPS_ScanListW[DataRow][17]
	DXPS_Notes+="\rAnalyser WF: "+SLP_DXPS_ScanListW[DataRow][18]
	DXPS_Notes+="\rDisp. line x1: "+SLP_DXPS_ScanListW[DataRow][19]
	DXPS_Notes+="\rDisp. line y1: "+SLP_DXPS_ScanListW[DataRow][20]
	DXPS_Notes+="\rDisp. line x2: "+SLP_DXPS_ScanListW[DataRow][21]
	DXPS_Notes+="\rDisp. line y2: "+SLP_DXPS_ScanListW[DataRow][22]
	DXPS_Notes+="\rScan notes: "+SLP_DXPS_ScanListW[DataRow][23]
	//DXPS_Notes+="\r"

	Return DXPS_Notes
End

Function SLP_DXPS_DisplaySelectedData(VolName)
	String VolName
	Variable DataRow=SLP_DXPS_FindDataRow(VolName)
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
	Variable i=0 //For indexing
	String TraceList=""
	String TraceName=""
	
	//Update all the global variables and shared wave (XPS param)
	NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	NVAR Offset=root:Package_SLP:DispXPS:Offset
	NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	NVAR NLines=root:Package_SLP:DispXPS:NLines
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
	Threshold=str2num(SLP_DXPS_ScanListW[DataRow][5])
	MinSize=str2num(SLP_DXPS_ScanListW[DataRow][6])
	Offset=str2num(SLP_DXPS_ScanListW[DataRow][7])
	LPLength=str2num(SLP_DXPS_ScanListW[DataRow][8])
	LPWidth=str2num(SLP_DXPS_ScanListW[DataRow][9])
	NLines=str2num(SLP_DXPS_ScanListW[DataRow][10])
	DispFactor=str2num(SLP_DXPS_ScanListW[DataRow][11])
	CenterPointX=str2num(SLP_DXPS_ScanListW[DataRow][12])
	CenterPointY=str2num(SLP_DXPS_ScanListW[DataRow][13])
	
	SLP_DXPS_XPSParamW[0][1]=SLP_DXPS_ScanListW[DataRow][14]
	SLP_DXPS_XPSParamW[1][1]=SLP_DXPS_ScanListW[DataRow][15]
	SLP_DXPS_XPSParamW[2][1]=SLP_DXPS_ScanListW[DataRow][16]
	SLP_DXPS_XPSParamW[3][1]=SLP_DXPS_ScanListW[DataRow][17]
	SLP_DXPS_XPSParamW[4][1]=SLP_DXPS_ScanListW[DataRow][18]
	
	//STRINGs FOR MAKING WAVE REFERENCEs
	string DataFolder=SLP_DXPS_ScanListW[DataRow][1]
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string ImgVol_ThW_FName= ImgVolW_FName+"_Th"
	string ImgVol_IntgW_FName= ImgVolW_FName+"_Intg"
	string BoundX_W_FName=ImgVolW_FName+"_BX"
	string BoundY_W_FName=ImgVolW_FName+"_BY"
	string DispLine_XWave_FName=ImgVolW_FName+"_DispLX"
	string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
	string PLineCoord_FName=ImgVolW_FName+"_PLCoord"
	string SpectraW_FName=ImgVolW_FName+"_Spectra"
	string CombinedSpectrmW_FName=ImgVolW_FName+"_Cmbnd"
	string DataCountsSpectraW_FName=ImgVolW_FName+"_DataCts"
	string Indv_SpectrumW_FName=SpectraW_FName+num2str(i)
	string CombinedSpectrmBEW_FName=ImgVolW_FName+"_CmbndBE"
			
	Wave SLP_DXPS_DummyImg1=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg1
	Wave SLP_DXPS_DummyImg2=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg2
	Wave SLP_DXPS_DummyImg3=root:Package_SLP:DispXPS:SLP_DXPS_DummyImg3
	Wave SLP_DXPS_DummySpectrum=root:Package_SLP:DispXPS:SLP_DXPS_DummySpectrum
	
	//Display#1: Img. Threshold
	If (Exists(ImgVol_ThW_FName))
		Wave ImgVol_ThW=$ImgVol_ThW_FName
		Duplicate /O ImgVol_ThW,SLP_DXPS_DummyImg1
	Else
		SLP_DXPS_DummyImg1=0
	EndIf
	
	//Display#2 Disp. line and P-lines
	//Remove all previous trace
	TraceList=TraceNameList("SLP_DispXPS_Panel_01#DX_DispLineImg",";",1)
	TraceName=""
	For (i=0;i<ItemsInList(TraceList,";");i+=1)
		TraceName=stringFromList(i,TraceList,";")
		RemoveFromGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg $TraceName
	EndFor
	
	Wave ImgVol_IntgW=$ImgVol_IntgW_FName
	
	Duplicate /O ImgVol_IntgW,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg2

	If (Exists(DispLine_XWave_FName)&&Exists(BoundX_W_FName))
		Wave BoundX_W=$BoundX_W_FName
		Wave BoundY_W=$BoundY_W_FName
		Wave DispLine_XWave=$DispLine_XWave_FName
		Wave DispLine_YWave=$DispLine_YWave_FName
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_DispLineImg BoundY_W vs BoundX_W
		ModifyGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg rgb=(0,43690,65535)	
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_DispLineImg DispLine_YWave vs DispLine_XWave
	EndIf
	
	If (Exists(PLineCoord_FName))
		Wave PLineCoord=$PLineCoord_FName
		//Multi P-lines
		setdrawlayer /W=SLP_DispXPS_Panel_01#DX_DispLineImg UserFront
		DrawAction /W=SLP_DispXPS_Panel_01#DX_DispLineImg delete
		For (i=0;i<NLines;i+=1)
			//Draw on the plot
			SetDrawEnv  /W=SLP_DispXPS_Panel_01#DX_DispLineImg xcoord=bottom,ycoord=left,lineFgc=(0,65535,0)
			DrawLine /W=SLP_DispXPS_Panel_01#DX_DispLineImg PLineCoord[i][2],PLineCoord[i][3],PLineCoord[i][4],PLineCoord[i][5]
			//Doupdate	
		Endfor
	Endif
	
	//Display#3 2D unshifted extracted spectra
	If (Exists(SpectraW_FName))
		Wave SpectraW=$SpectraW_FName
		Duplicate /O SpectraW,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg3
		string ImageName=stringfromlist(0,ImageNameList("SLP_DispXPS_Panel_01#2DSpectra", ";" ))
		ModifyImage /W=SLP_DispXPS_Panel_01#DX_2DSpectra $ImageName ctab= {*,*,Rainbow,0}
	Else
		SLP_DXPS_DummyImg3=0
	Endif
	
	//Display#4 Shifted indv. spectra
	TraceList=TraceNameList("SLP_DispXPS_Panel_01#DX_ShiftedSpectra",";",1) 
	If (Exists(Indv_SpectrumW_FName))
		For (i=0;i<NLines;i+=1)
			Indv_SpectrumW_FName=SpectraW_FName+num2str(i)
			Wave Indv_SpectrumW=$Indv_SpectrumW_FName
			Appendtograph /W=SLP_DispXPS_Panel_01#DX_ShiftedSpectra Indv_SpectrumW
		EndFor
		SLP_Util_RemoveTraces("SLP_DispXPS_Panel_01#DX_ShiftedSpectra",TraceList) //Need to remove traces before using MakeRedGradient procedure
		SLP_Util_MakeRedGradient("SLP_DispXPS_Panel_01#DX_ShiftedSpectra")
	Else
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_ShiftedSpectra SLP_DXPS_DummySpectrum
		SLP_Util_RemoveTraces("SLP_DispXPS_Panel_01#DX_ShiftedSpectra",TraceList)
	EndIf
	
	//Display#5 Combined spectrum
	If (stringmatch(SLP_DXPS_ScanListW[DataRow][26],"1")) //BE
		If (Exists(CombinedSpectrmBEW_FName))
			SLP_Util_AddnRmTraces("SLP_DispXPS_Panel_01#DX_MergedSpectra",CombinedSpectrmBEW_FName,0)
			SetAxis /W=SLP_DispXPS_Panel_01#DX_MergedSpectra /A/R bottom
			Label /W=SLP_DispXPS_Panel_01#DX_MergedSpectra bottom "Binding energy (eV)"
			SLP_DXPS_PT_UpdateTag()
		Endif
	Elseif (stringmatch(SLP_DXPS_ScanListW[DataRow][26],"0")) //KE/STV
		If (Exists(CombinedSpectrmW_FName))
			SLP_Util_AddnRmTraces("SLP_DispXPS_Panel_01#DX_MergedSpectra",CombinedSpectrmW_FName,0)
			SetAxis /W=SLP_DispXPS_Panel_01#DX_MergedSpectra /A bottom
			Label /W=SLP_DispXPS_Panel_01#DX_MergedSpectra bottom "Start voltage (eV)"
			SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
		EndIf
	EndIf
	
	SLP_DXPS_DispPeakAssign(0)
	CheckBox  CheckBox_BE ,win=SLP_DispXPS_Panel_01,value=str2num(SLP_DXPS_ScanListW[DataRow][26])
	CheckBox  CheckBox_PeakID ,win=SLP_DispXPS_Panel_01,value=str2num(SLP_DXPS_ScanListW[DataRow][27])
	
	CheckBox CheckBox_Show_XPS,win=SLP_DispXPS_Panel_01,value=str2num(SLP_DXPS_ScanListW[DataRow][29])
	CheckBox CheckBox_Show_Auger,win=SLP_DispXPS_Panel_01,value=str2num(SLP_DXPS_ScanListW[DataRow][30])
	CheckBox CheckBox_Show_Custom,win=SLP_DispXPS_Panel_01,value=str2num(SLP_DXPS_ScanListW[DataRow][31])
	
	ModifyGraph /W=SLP_DispXPS_Panel_01#DX_MergedSpectra lsize=2,rgb=(1,34817,52428)
	
	//Disable Dispersive Line Creation section if the raw data has been removed
	String RawDataDel_Flg=SLP_DXPS_ScanListW[DataRow][25]
	If (StringMatch(RawDataDel_Flg,"y"))
		SLP_DXPS_TgglControls("Disable")
	Else
		SLP_DXPS_TgglControls("Enable")
	EndIf
End

Function SLP_DXPS_CreateBESpectrum()
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
	string CombinedSpectraW_FName=ImgVolW_FName+"_Cmbnd"
	string CombinedSpectraBEW_FName=ImgVolW_FName+"_CmbndBE"
	
	variable aWF=0
	
	If (stringmatch(SLP_DXPS_ScanListW[SelRow][18],""))
			Prompt aWF,"Analyzer workfunction (eV):"
			DoPrompt "Enter missing parameter",aWF
			SLP_DXPS_ScanListW[SelRow][18]=num2str(aWF)
			SLP_DXPS_XPSParamW[4][1]=num2str(aWF)
	Endif
	
	duplicate /O $CombinedSpectraW_FName,$CombinedSpectraBEW_FName
	wave CombinedSpectraW=$CombinedSpectraW_FName
	Wave CombinedSpectraBEW=$CombinedSpectraBEW_FName
	
	SetFormula CombinedSpectraW,CombinedSpectraBEW_FName
	
	Variable STV_Start=str2num(SLP_DXPS_ScanListW[SelRow][14])
	Variable STV_End=str2num(SLP_DXPS_ScanListW[SelRow][15])
	Variable STV_Step=str2num(SLP_DXPS_ScanListW[SelRow][16])
	Variable hv=str2num(SLP_DXPS_ScanListW[SelRow][17])
	aWF=str2num(SLP_DXPS_ScanListW[SelRow][18])
	
	Setscale /P x,hv-STV_Start-aWF,-1*STV_Step,CombinedSpectraBEW
	
End

Function ListBoxProc_DXPS_XPSParam(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_DXPS_ScanListW[SelRow][14]=SLP_DXPS_XPSParamW[0][1]
			SLP_DXPS_ScanListW[SelRow][15]=SLP_DXPS_XPSParamW[1][1]
			SLP_DXPS_ScanListW[SelRow][16]=SLP_DXPS_XPSParamW[2][1]
			SLP_DXPS_ScanListW[SelRow][17]=SLP_DXPS_XPSParamW[3][1]
			SLP_DXPS_ScanListW[SelRow][18]=SLP_DXPS_XPSParamW[4][1]
			SLP_DXPS_CreateBESpectrum()
			
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function ListBoxProc_DXPS_ScanList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	//MODIFIED: 20.08.2020 - Move Toggle control (after raw data removal) to DisplaySelectedData()
	//DESCRIPTIONs: ListBoxProc for main DXPS panel
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			If (row!=-1&&row<dimsize(SLP_DXPS_ScanListW,0))
				String VolName=SLP_DXPS_ScanListW[row][0]
				SLP_DXPS_DisplaySelectedData(VolName)
				
				//Remove 'Copied disp. line' flag if the user has edited the Th. or MinSize
				string CopiedDispL_Flg=SLP_DXPS_ScanListW[row][24]
				If (StringMatch(CopiedDispL_Flg,"y"))
					SetVariable SetVar_Threshold valueColor=(39321,39321,39321),win=SLP_DispXPS_Panel_01
					SetVariable SetVar_MinSize valueColor=(39321,39321,39321),win=SLP_DispXPS_Panel_01
				Else
					SetVariable SetVar_Threshold valueColor=(0,0,0),win=SLP_DispXPS_Panel_01
					SetVariable SetVar_MinSize valueColor=(0,0,0),win=SLP_DispXPS_Panel_01
				EndIf
				
//				//Disable Dispersive Line Creation section if the raw data has been removed
//				String RawDataDel_Flg=SLP_DXPS_ScanListW[row][25]
//				If (StringMatch(RawDataDel_Flg,"y"))
//					SLP_DXPS_TgglControls("Disable")
//				Else
//					SLP_DXPS_TgglControls("Enable")
//				EndIf
			EndIf
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			//Copy scan notes to the ScanListW
			SLP_DXPS_ScanListW[][23]=SLP_DXPS_ScanListDisplayW[p][2]
		
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function SLP_DXPS_ExpCmbnSpectrm()

	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	
	string ScanName=SLP_DXPS_ScanListW[SelRow][0]
	string ScanNote=SLP_DXPS_ScanListDisplayW[SelRow][2]
	string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
	string CombinedSpectraW_FName=ImgVolW_FName+"_Cmbnd"
	String CombinedSpectrmBEW_FName=ImgVolW_FName+"_CmbndBE"
	Wave CombinedSpectraW=$CombinedSpectraW_FName
	If (Exists(CombinedSpectrmBEW_FName))
		Wave CombinedSpectrmBEW=$CombinedSpectrmBEW_FName
	EndIf
	String Exp_CmbndSpectrmName=""
	Variable Exit_Flag=0
	
	If (Stringmatch(SLP_DXPS_ScanListW[SelRow][26],"0")) //K.E. plot
		Exp_CmbndSpectrmName=ScanName+"_Cmbnd"
		Prompt Exp_CmbndSpectrmName,"Enter name for the exported spectrum"
		DoPrompt "Wave name",Exp_CmbndSpectrmName
		
		If (Exists(Exp_CmbndSpectrmName))
			DoAlert 2,"Wave '"+Exp_CmbndSpectrmName+"' already exists. Overwrite the wave?"
			If (V_Flag==2) //No
				Do
					Prompt Exp_CmbndSpectrmName,"Choose a new wave name"
					DoPrompt "Duplicate wave name. Enter a new name",Exp_CmbndSpectrmName
					If(V_Flag) //If cancel is clicked
						Return 0
					EndIf
				While(Exists(Exp_CmbndSpectrmName)) //Loop until the user give non-duplicated wave name, or click cancel
			ElseIf (V_Flag==3) //Cancel
				Exit_Flag=1
			Endif
		Endif
		
		If (Exit_Flag==0)
			//Export the spectrum wave from the data folder to the 'current' (i.e. user's) folder
			Duplicate /O CombinedSpectraW,$Exp_CmbndSpectrmName /WAVE=Exp_CmbndSpectrm
			Note Exp_CmbndSpectrm,SLP_DXPS_CreateNotes(ScanName)
			Display Exp_CmbndSpectrm
			Modifygraph mirror=1,tick=2,minor=1
			If (!StringMatch(ScanNote,"<Enter note here (optional)>"))
				SLP_Util_LegendFromList("",ScanNote)
			Else
				Legend
			EndIf
			Label bottom "Start voltage (eV)"
			Label left "Intensity (a.u.)"
			Modifygraph LSize=2,rgb=(1,34817,52428)
		Endif
	
	ElseIf (Stringmatch(SLP_DXPS_ScanListW[SelRow][26],"1")) //B.E. plot
		Exp_CmbndSpectrmName=ScanName+"_CmbndBE"
		Prompt Exp_CmbndSpectrmName,"Enter name for the exported spectrum"
		DoPrompt "Wave name",Exp_CmbndSpectrmName
		
		If (Exists(Exp_CmbndSpectrmName))
			DoAlert 2,"Wave '"+Exp_CmbndSpectrmName+"' already exists. Overwrite the wave?"
			If (V_Flag==2) //No
				Do
					Prompt Exp_CmbndSpectrmName,"Choose a new wave name"
					DoPrompt "Duplicate wave name. Enter a new name",Exp_CmbndSpectrmName
					If(V_Flag) //If cancel is clicked
						Return 0
					EndIf
				While(Exists(Exp_CmbndSpectrmName)) //Loop until the user give non-duplicated wave name, or click cancel
			ElseIf (V_Flag==3) //Cancel
				Exit_Flag=1
			Endif
		Endif
		
		If (Exit_Flag==0)
			//Export the spectrum wave from the data folder to the 'current' (i.e. user's) folder
			Duplicate /O CombinedSpectrmBEW,$Exp_CmbndSpectrmName /WAVE=Exp_CmbndSpectrm
			Note Exp_CmbndSpectrm,SLP_DXPS_CreateNotes(ScanName)
			Display Exp_CmbndSpectrm
			Modifygraph mirror=1,tick=2,minor=1
			If (!StringMatch(ScanNote,"<Enter note here (optional)>"))
				SLP_Util_LegendFromList("",ScanNote)
			Else
				Legend
			EndIf
			Label bottom "Binding energy (eV)"
			Label left "Intensity (a.u.)"
			Modifygraph LSize=2,rgb=(52428,1,1)
			Setaxis /A/R bottom
		EndIf
		
		variable PT_XPS_Flg=str2num(SLP_DXPS_ScanListW[SelRow][29])
		variable PT_Auger_Flg=str2num(SLP_DXPS_ScanListW[SelRow][30])
		variable PT_Custom_Flg=str2num(SLP_DXPS_ScanListW[SelRow][31])
		If (PT_XPS_Flg)
			SLP_UTIL_InsertXPSTag("",1)
		EndIf
		If (PT_Auger_Flg)
			SLP_UTIL_InsertAugerTag("",1)
		EndIf
		If (PT_Custom_Flg)
			SLP_UTIL_InsertCustomTag("",1)
		EndIf
		
	Endif
End


Function SLP_DXPS_CreateExpWave()

	Make /O/T/N=(32,32) root:Package_SLP:DispXPS:ExpWave /Wave=ExpWave
	ExpWave[0][0]="Pre-processing"
	ExpWave[1][0]="Normalize";ExpWave[1][1]="0";ExpWave[1][2]="Normalization position"
	
	ExpWave[2][0]="Subtract background";ExpWave[2][1]="0"
	ExpWave[2][2]="Background type";ExpWave[2][3]="Flat"
	ExpWave[2][4]="BG low X";ExpWave[2][5]="0"
	ExpWave[2][6]="BG high X";ExpWave[2][7]="0"
	
	ExpWave[3][0]="Output options"
	ExpWave[3][2]="Positive delta E";ExpWave[3][3]="0"
	ExpWave[3][4]="KE";ExpWave[3][5]="0"
	
	ExpWave[4][0]="Individual plots";ExpWave[4][1]="0"
	
	ExpWave[5][0]="Graph stack"; ExpWave[5][1]="1"
	ExpWave[5][2]="Auto offset"; ExpWave[5][3]="0"
	ExpWave[5][4]="Grid line"; ExpWave[5][5]="0"
	
	ExpWave[6][0]="2D plot"; ExpWave[6][1]="0"
	
	ExpWave[7][0]="Fit"; ExpWave[7][1]="0"
	
	ExpWave[8][0]="Report"; ExpWave[8][1]="0"
	ExpWave[8][2]="Text export"; ExpWave[8][3]="0"

End

Function SLP_DXPSExp_AutoRange()
	Wave /T ExpWave=root:Package_SLP:DispXPS:ExpWave
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	String WaveFName=""
	Variable KE_Flg=str2num(ExpWave[3][5])
	Variable i=0
	Variable N_Scans=dimsize(SLP_DXPS_ScanListW,0)
	NVAR Exp_BGHighX=root:Package_SLP:DispXPS:Exp_BGHighX
	NVAR Exp_BGLowX=root:Package_SLP:DispXPS:Exp_BGLowX
	NVAR Exp_NrmPos=root:Package_SLP:DispXPS:Exp_NrmPos
	Exp_BGHighX=inf
	Exp_BGLowX=-inf
	If (!KE_Flg)//KE flg =0
		For (i=0;i<N_Scans;i+=1)
			If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49)
				WaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_CmbndBE"
				Wave CmbndW=$WaveFName
				If (Dimoffset(CmbndW,0)<Exp_BGHighX)
					Exp_BGHighX=Dimoffset(CmbndW,0)
				EndIf
				If (Dimoffset(CmbndW,0)+DimDelta(CmbndW,0)*(DimSize(CmbndW,0)-1)>Exp_BGLowX)
					Exp_BGLowX=Dimoffset(CmbndW,0)+DimDelta(CmbndW,0)*(DimSize(CmbndW,0)-1)
				EndIf
			EndIf
		EndFor
		Exp_NrmPos=Exp_BGLowX
	Elseif (KE_Flg)//KE flg =1
		For (i=0;i<N_Scans;i+=1)
			If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49)
				WaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_Cmbnd"
				Wave CmbndW=$WaveFName
				If (Dimoffset(CmbndW,0)>Exp_BGLowX)
					Exp_BGLowX=Dimoffset(CmbndW,0)
				EndIf
				If (Dimoffset(CmbndW,0)+DimDelta(CmbndW,0)*(DimSize(CmbndW,0)-1)<Exp_BGHighX)
					Exp_BGHighX=Dimoffset(CmbndW,0)+DimDelta(CmbndW,0)*(DimSize(CmbndW,0)-1)
				EndIf
			EndIf
		EndFor
		Exp_NrmPos=Exp_BGHighX
	EndIf
	
	ExpWave[2][7]=num2str(Exp_BGHighX)
	ExpWave[2][5]=num2str(Exp_BGLowX)
	ExpWave[1][3]=num2str(Exp_NrmPos)
	
End

Function CheckProc_DXPSExp_ExpOptions(cba) : CheckBoxControl
	//MODIFIED: 11.03.2021 - Add Oversampling function
	
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			Wave /T ExpWave=root:Package_SLP:DispXPS:ExpWave
			
			strswitch (cba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "check_DXPSExp_Norm":
					ExpWave[1][1]=num2str(checked)
					break
				case "check_DXPSExp_BG":
					ExpWave[2][1]=num2str(checked)
					break
				case "check_DXPSExp_Positive_dE":
					ExpWave[3][3]=num2str(checked)
					break
				case "check_DXPSExp_KE_Flg":
					ExpWave[3][5]=num2str(checked)
					SLP_DXPSExp_AutoRange()
					break
				case "check_DXPSExp_Indv":
					ExpWave[4][1]=num2str(checked)
					break
				case "check_DXPSExp_Stack":
					ExpWave[5][1]=num2str(checked)
					break
				case "check_DXPSExp_2D":
					ExpWave[6][1]=num2str(checked)
					break
				case "check_DXPSExp_GLAFit":
					ExpWave[7][1]=num2str(checked)
					break
				case "check_DXPSExp_Report":
					ExpWave[8][1]=num2str(checked)
					break
				case "check_DXPSExp_AutoOffset":
					ExpWave[5][3]=num2str(checked)
					break
				case "check_DXPSExp_Grid":
					ExpWave[5][5]=num2str(checked)
					break
				case "check_DXPSExp_Text":
					ExpWave[8][3]=num2str(checked)
					break	
				case "check_DXPSExp_OverSampling":
					ExpWave[8][5]=num2str(checked)
					break
				EndSwitch
						
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DXPSExp_Param(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			Wave /T ExpWave=root:Package_SLP:DispXPS:ExpWave
			strswitch (sva.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "setvar_DXPSExp_NormPos":
					NVAR Exp_NrmPos=root:Package_SLP:DispXPS:Exp_NrmPos
					ExpWave[1][3]=num2str(Exp_NrmPos)
					break
				case "setvar_DXPSExp_BGLowX":
					NVAR Exp_BGLowX=root:Package_SLP:DispXPS:Exp_BGLowX
					ExpWave[2][5]=num2str(Exp_BGLowX)
					break
				case "setvar_DXPSExp_BGHighX":
					NVAR Exp_BGHighX=root:Package_SLP:DispXPS:Exp_BGHighX
					ExpWave[2][7]=num2str(Exp_BGHighX)
					break
				case "setvar_DXPSExp_Name":
					SVAR Exp_Name=root:Package_SLP:DispXPS:Exp_Name
					ExpWave[0][1]=Exp_Name
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function ButtonProc_DXPS_ExportSelected(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Panel_DXPS_Export()
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function Panel_DXPS_Export() : Panel
	//MODIFIED: 11.03.2021 - added Oversampling function
	//DESCRIPTIONs: Create a panel which users can select various export options.
	
	Dowindow /K DXPS_ExportGraph
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(620,48,1164,254) /N=DXPS_ExportGraph
	ModifyPanel cbRGB=(40000,50000,60000)
	
	Wave /T ExpWave=root:Package_SLP:DispXPS:ExpWave
	
	SetDrawLayer UserBack
	SetDrawEnv fsize= 14
	DrawText 3,22,"Export selected graphs"
	DrawText 17,52,"Pre-processing"
	DrawText 17,108,"Output options"
	
	NVAR Exp_num=root:Package_SLP:DispXPS:Exp_num
	SVAR Exp_name=root:Package_SLP:DispXPS:Exp_name
	Exp_Num+=1
	sprintf Exp_name,"DXPS_Plot%03d",Exp_num
	ExpWave[0][1]=Exp_Name
	
	SetVariable setvar_DXPSExp_Name,pos={197,8},size={241,16},proc=SetVarProc_DXPSExp_Param,title="Export name"
	SetVariable setvar_DXPSExp_Name,fSize=10
	SetVariable setvar_DXPSExp_Name,limits={-inf,inf,0},value= root:Package_SLP:DispXPS:Exp_Name
	
	CheckBox check_DXPSExp_Norm,pos={50,52},size={65,15},proc=CheckProc_DXPSExp_ExpOptions,title="Normalize",fSize=10,value=str2num(ExpWave[1][1])
	CheckBox check_DXPSExp_BG,pos={50,71},size={119,15},title="Subtract background",fSize=10,value= str2num(ExpWave[2][1]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_Positive_dE,pos={184,94},size={85,15},proc=CheckProc_DXPSExp_ExpOptions,title="Positive delta E",fSize=9,value=str2num(ExpWave[3][3])
	CheckBox check_DXPSExp_KE_Flg,pos={286,94},size={29,15},proc=CheckProc_DXPSExp_ExpOptions,title="KE",fSize=9,value= str2num(ExpWave[3][5])
	CheckBox check_DXPSExp_Indv,pos={50,113},size={90,15},title="Individual plots",fSize=10,value=str2num(ExpWave[4][1]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_Stack,pos={50,131},size={75,15},title="Graph stack",fSize=10,value= str2num(ExpWave[5][1]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_AutoOffset,pos={184,129},size={68,15},title="Auto offset",fSize=9,value= str2num(ExpWave[5][3]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_Grid,pos={267,129},size={57,15},title="Grid lines",fSize=9,value= str2num(ExpWave[5][5]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_2D,pos={50,148},size={54,15},title="2D plot",fSize=10,value= str2num(ExpWave[6][1]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_GLAFit,pos={50,166},size={30,15},title="Fit",fSize=10,value= str2num(ExpWave[7][1]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_Report,pos={50,186},size={50,15},title="Report",fSize=10,value= str2num(ExpWave[8][1]),proc=CheckProc_DXPSExp_ExpOptions
	CheckBox check_DXPSExp_Text,pos={119,187},size={37,15},title="Text export",fSize=10,value= str2num(ExpWave[8][3]),proc=CheckProc_DXPSExp_ExpOptions
	
	//ADDED [11.03.2021]
	CheckBox check_DXPSExp_OverSampling,pos={361.00,114.00},size={83.00,16.00},proc=CheckProc_DXPSExp_ExpOptions,title="Oversampling"
	CheckBox check_DXPSExp_OverSampling,fSize=10,value=str2num(ExpWave[8][5]),proc=CheckProc_DXPSExp_ExpOptions
	SetVariable setvar_DXPSExp_NewStep,pos={377.00,131.00},size={130.00,14.00},proc=SetVarProc_DXPSExp_Param,title="New energy step (eV)"
	SetVariable setvar_DXPSExp_NewStep,value= root:Package_SLP:DispXPS:ExpWave[8][6]

	
	//Auto-detect the parameters (from wave x-scale) [WARNING] only for BE (not for KE)
	Variable i=0
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	String WaveFName=""
	Variable N_Scans=dimsize(SLP_DXPS_ScanListW,0)
	NVAR Exp_BGHighX=root:Package_SLP:DispXPS:Exp_BGHighX
	NVAR Exp_BGLowX=root:Package_SLP:DispXPS:Exp_BGLowX
	NVAR Exp_NrmPos=root:Package_SLP:DispXPS:Exp_NrmPos
	SLP_DXPSExp_AutoRange()

	ExpWave[1][3]=num2str(Exp_NrmPos)
	
	SetVariable setvar_DXPSExp_NormPos,pos={197,48},size={160,15},title="Normalization position",value=root:Package_SLP:DispXPS:Exp_NrmPos,proc=SetVarProc_DXPSExp_Param
	SetVariable setvar_DXPSExp_BGHighX,pos={346,73},size={90,15},title="High X",value=root:Package_SLP:DispXPS:Exp_BGHighX,proc=SetVarProc_DXPSExp_Param
	SetVariable setvar_DXPSExp_BGLowX,pos={443,73},size={90,15},title="Low X",value=root:Package_SLP:DispXPS:Exp_BGLowX,proc=SetVarProc_DXPSExp_Param
	
	PopupMenu popup_DXPSExp_BG,pos={197,69},size={127,20},title="Background type",mode=1,popvalue="Flat",value= #"\"Flat;Slope;Shirley\"",proc=PopMenuProc_DXPSExp_BGType

	Button button_DXPSExp_Ok,pos={419,175},size={50,20},title="Ok",proc=ButtonProc_DXPSExp_Ok
	Button button_DXPSExp_Cancel,pos={479,175},size={50,20},title="Cancel",proc=ButtonProc_DXPSExp_cancel

End

Function ButtonProc_DXPSExp_cancel(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow /K DXPS_ExportGraph
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function PopMenuProc_DXPSExp_BGType(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			Wave /T ExpWave=root:Package_SLP:DispXPS:ExpWave
			
			ExpWave[2][3]=popStr
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_ExportSelected()
	//MODIFIED: 10.03.2021
	//DESCRIPTIONs: Exporting DispXPS data into plots or different data formats.
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	Variable N_Scans=dimsize(SLP_DXPS_ScanListW,0)
	Wave /T ExpWave=root:Package_SLP:DispXPS:ExpWave
	
	string Current_folder=getdatafolder(1)
	String ExportName=ExpWave[0][1] //Export name with automatically-generated number
	String FolderFName=Current_folder+ExportName //A new export folder is created on the current folder to store waves
	String WaveFName=""
	String WName=""
	String OverSampW_FName=""
	String NewWFName=""
	Variable NrmK=0
	Variable NrmPos=0
	Variable i=0
	Variable j=0
	String BGType=ExpWave[2][3]
	Variable BGlowX=str2num(ExpWave[2][5])
	Variable BGhighX=str2num(ExpWave[2][7])
	String BGW_FName=""
	String ShirleyBGW_FName=""
	String nShirleyBGW_FName=""
	String ExportWaveList=""
	String ExportWaveList_Oversamp=""
	Variable YOffset=0
	Variable GraphHeight=0
	Variable GraphOffset=0
	String Exprted2DW_Name=""
	Variable TwoD_HighX=inf
	Variable TwoD_LowX=-inf
	Variable TwoD_XStep=0
	String LegendTextList=""
	
	If (!DataFolderExists(FolderFName))	
		NewDataFolder $FolderFName //Create an Export folder to store waves
		
		For (i=0;i<N_Scans;i+=1) //Run through the ScanList
			//If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49) //[TODO]
			If (SLP_DXPS_ScanListDisplaySelW[i][0]&0x10) //[12.03.2021] Replaced If (xx==48&&..) with bitwise operation
				//Export in BE or KE
				If (str2num(ExpWave[3][5])==0) //BE
					WaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_CmbndBE"
				Else
					WaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_Cmbnd"
				Endif
				
				//Use ScanNote field in ScanListDisplay for legend
				LegendTextList+=SLP_DXPS_ScanListDisplayW[i][2]+";"
				
				NewWFName=FolderFName+":"+SLP_DXPS_ScanListW[i][0]
				Duplicate /O $WaveFName,$NewWFName /Wave=NewW
				
				If (dimdelta(NewW,0)<0)
					If (str2num(ExpWave[3][3])==1) //Positve dE (e.g. for fitting)
						If (dimdelta($NewWFName,0)<0)
							SLP_Util_Reverse_Xaxis(NewWFName,"root:Package_SLP:DispXPS:RevDataW")
							wave RevDataW=root:Package_SLP:DispXPS:RevDataW
							SetScale /P x,dimoffset(NewW,0)+dimdelta(NewW,0)*(dimsize(NewW,0)-1),-1*dimdelta(NewW,0),RevDataW
							Duplicate /O RevDataW,NewW //overwrite
							Killwaves RevDataW
						EndIf
					EndIf
				EndIf
				
				If (str2num(ExpWave[1][1])) //Normalize
					NrmPos=str2num(ExpWave[1][3])
					NrmK=NewW(NrmPos)
					NewW/=NrmK
				EndIf
				
				If (str2num(ExpWave[2][1])) //Subtract BG
					BGW_FName=FolderFName+":"+"DXPSExp_BG"
					Duplicate /O NewW,$BGW_FName /Wave=BGW
					BGW=0 //copy x scale and N_points
					
					strswitch(BGType)	// string switch
						case "Flat":		// execute if case matches expression
							BGW=NewW(BGlowX)
							break
						case "Slope":
							BGW=NewW(BGlowX)*(x<=BGlowX)+NewW(BGhighX)*(x>=BGhighX)+(x>BGlowX&&x<BGhighX)*(NewW(BGlowX)+(x-BGlowX)*(NewW(BGhighX)-NewW(BGlowX))/(BGhighX-BGlowX))	
							break
						case "Shirley":
							SLP_Util_ShirleyGen(NewWFName,BGhighX,BGlowX,10,0)
							ShirleyBGW_FName=NewWFName+"_Shirley"
							Duplicate /O $ShirleyBGW_FName,$BGW_FName
							Killwaves $ShirleyBGW_FName
							nShirleyBGW_FName=NewWFName+"_nSBG"
							Killwaves $nShirleyBGW_FName
							break
					endswitch
					NewW-=BGW
					
				EndIf
				
				ExportWaveList+=SLP_DXPS_ScanListW[i][0]+"," //use ',' because of SLP_Util_Make2DWave
				
				// OVERSAMPLING [20210310a]
				If (str2num(ExpWave[8][5]))
					String RawDataW_FName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]
					If (!Exists(RawDataW_FName))
						DoAlert 0,"Need to reload raw data for oversampling of "+SLP_DXPS_ScanListW[i][0]
					Else
						String ResultW_FName
						If (str2num(ExpWave[3][5])==0) //BE
							ResultW_FName=FolderFName+":"+SLP_DXPS_ScanListW[i][0]+"_OverSamp_BE"
						Else 
							ResultW_FName=FolderFName+":"+SLP_DXPS_ScanListW[i][0]+"_OverSamp"
						EndIf
						ExportWaveList_OverSamp+=ResultW_FName
						
						String DispAreaW_FName=SLP_DXPS_ScanListW[i][1]+"M_Particle"
						Redimension /I $DispAreaW_FName
						
						Variable x0=str2num(SLP_DXPS_ScanListW[i][12])
						Variable y0=str2num(SLP_DXPS_ScanListW[i][13])
						Variable DispX1=str2num(SLP_DXPS_ScanListW[i][19])
						Variable DispY1=str2num(SLP_DXPS_ScanListW[i][20])
						Variable DispX2=str2num(SLP_DXPS_ScanListW[i][21])
						Variable DispY2=str2num(SLP_DXPS_ScanListW[i][22])
						Variable DispFactor=str2num(SLP_DXPS_ScanListW[i][11])
						Variable STV_Start=str2num(SLP_DXPS_ScanListW[i][14])
						Variable STV_Step=str2num(SLP_DXPS_ScanListW[i][16])
						Variable STV_NewStep=str2num(ExpWave[8][6])
						String ProgressText="Oversampling "+SLP_DXPS_ScanListW[i][0]
						SLP_DXPS_OverSampling(RawDataW_FName,ResultW_FName,DispAreaW_FName,x0,y0,DispX1,DispY1,DispX2,DispY2,DispFactor,STV_Start,STV_Step,STV_NewStep,ProgressText)
						If (str2num(ExpWave[3][5])==0) //BE
							Wave ResultW=$ResultW_FName
							Variable hv=str2num(SLP_DXPS_ScanListW[i][17])
							Variable aWF=str2num(SLP_DXPS_ScanListW[i][18])
							SetScale /P x,hv-STV_Start-aWF,STV_NewStep*(-1),ResultW
						EndIf
						Note ResultW,"Raw data: "+RawDataW_FName+"\rOriginal step: "+num2str(STV_Step)+"\rNew step: "+num2str(STV_NewStep)+"\rScan notes:"+SLP_DXPS_ScanListDisplayW[i][2]
						Display $ResultW_FName;legend;
					EndIf
				EndIf
			EndIf
		EndFor
		
		//Output
		SetDataFolder $FolderFName
		If (str2num(ExpWave[4][1])) //Individual plot
			For (i=0;i<itemsinlist(ExportWaveList,",");i+=1)
				WName=stringfromlist(i,ExportWaveList,",")
				Display $WName
				If (str2num(ExpWave[3][5])==0) //BE
					Setaxis /A/R bottom
					Label bottom "Binding energy (eV)"
				Else
					Label bottom "Start voltage (eV)"
				EndIf
				SLP_DXPSExp_FormatGraph()
				SLP_Util_LegendFromList("",StringFromList(i,LegendTextList,";"))
			EndFor
		EndIf
		
		If (str2num(ExpWave[5][1])) //Graph stack
			Display /N=DXPS_Export
			For (i=0;i<itemsinlist(ExportWaveList,",");i+=1)
				WName=stringfromlist(i,ExportWaveList,",")
				Appendtograph $WName
				Modifygraph rgb($WName)=(20000,20000,65535*(i+1)/itemsinlist(ExportWaveList,","))
				If (str2num(ExpWave[5][3]))//Offset
					ModifyGraph offset($WName)={0,GraphOffset}
					Wavestats /Q $WName
					GraphHeight=V_Max-V_Min
					GraphOffset+=GraphHeight
				EndIf
			EndFor
			SLP_Util_LegendFromList("",LegendTextList)
			If (str2num(ExpWave[3][5])==0) //BE
				Setaxis /A/R bottom
				Label bottom "Binding energy (eV)"
			Else
				Label bottom "Start voltage (eV)"
			EndIf
			SLP_DXPSExp_FormatGraph()
			
			If (Str2num(ExpWave[5][5])==1) //Grid line
				ModifyGraph grid(bottom)=2
			EndIf
			SLP_Util_MakeRainbow()
		EndIf
		
		If (str2num(ExpWave[6][1])) //2D
			Exprted2DW_Name=ExportName
			
			WName=stringfromlist(0,ExportWaveList,",")
			Wave W=$WName
			TwoD_XStep=(DimDelta(W,0))
			
			TwoD_HighX=str2num(ExpWave[2][7])
			TwoD_LowX=str2num(ExpWave[2][5])
			
			Prompt TwoD_HighX,"Maximum energy"
			Prompt TwoD_LowX,"Minimum energy"
			Prompt TwoD_XStep,"Energy step"
			Prompt Exprted2DW_Name, "Exported 2D wave name"
			DoPrompt "Enter parameters",TwoD_HighX,TwoD_LowX,TwoD_XStep,Exprted2DW_Name
			
			IF (TwoD_XStep<0)
				SLP_Util_Make2DWave(TwoD_HighX,TwoD_LowX,TwoD_XStep,ExportWaveList,Exprted2DW_Name) //for neg. dE
			Elseif (TwoD_XStep>0)
				SLP_Util_Make2DWave(TwoD_LowX,TwoD_HighX,TwoD_XStep,ExportWaveList,Exprted2DW_Name) //for pos. dE
			EndIf
			NewImage $Exprted2DW_Name
			ModifyGraph margin(top)=30
			If (str2num(ExpWave[3][5])==0) //BE
				Setaxis /A/R top
				Label top "Binding energy (eV)"
			Else
				Setaxis /A top
				Label top "Start voltage (eV)"
			EndIf
			Setaxis /A left
			ModifyImage $Exprted2DW_Name ctab= {*,*,Rainbow,0}
			ModifyGraph height=100
			DoUpdate
			ModifyGraph height=0
		EndIf
		
		//Converting the selected scans into text files
		//Added on 20181024
		If (str2num(ExpWave[8][3])) //text file
			//Ask for path to save file
			GetFileFolderInfo /D
			If (V_Flag!=-1)
				newpath SaveTxtPath,S_Path
				For (i=0;i<itemsinlist(ExportWaveList,",");i+=1)
					WName=stringfromlist(i,ExportWaveList,",")
					Save/G/W/U={1,1,1,1}/F/P=SaveTxtPath $WName as WName+".txt"
					//For Oversampling export
					If (str2num(ExpWave[8][5])) //If OverSampling function is used
						OverSampW_FName=stringfromlist(i,ExportWaveList_OverSamp,",")
						Save/G/W/U={1,1,1,1}/F/P=SaveTxtPath $OverSampW_FName as WName+"_OverSamp.txt"
					EndIf	
				EndFor
				killpath SaveTxtPath
			EndIF
		EndIf
		
		SetDataFolder $Current_folder
	Else
		DoAlert 0,"Folder already exists"
	Endif
End

Function SLP_DXPS_Realtime_Settings()
	//CREATED: 23.03.2021
	//DESCRIPTIONs: Create default settings for realtime DXPS funcition
	
	Make /O/N=(32,3) root:Package_SLP:DispXPS:RealtimePlot:SettingsSel /Wave=SettingsSelW
	SettingsSelW=0
	SettingsSelW[][1]=2
	Make /T/O/N=(32,3) root:Package_SLP:DispXPS:RealtimePlot:Settings /Wave=SettingsW
	SetDimLabel 1,0,Parameter,SettingsW
	SetDimLabel 1,1,Value,SettingsW
	SetDimLabel 1,2,Description,SettingsW
	
	//Enter default settings here:
	
	SettingsW[0][0]="Time out"
	SettingsW[0][1]="10"
	SettingsW[0][2]="time in sec. for program to automatically stop the background process and mark the scan finished"
	
	SettingsW[1][0]="Update time"
	SettingsW[1][1]="2"
	SettingsW[1][2]="time in sec. for program to automatically check for new image file in the background process"
	
	SettingsW[2][0]="BE window"
	SettingsW[2][1]="2"
	SettingsW[2][2]="Energy window in eV for peak assignment suggestions"
	
End

Function Panel_DXPS_Realtime() : Panel
	//DESCRIPTIONs: A panel for users to observe DispXPS results during the scan, just link in conventional XPS systems.
	//CREATED: 22.03.2021
	
	If (!DataFolderExists("root:Package_SLP:DispXPS:RealtimePlot:"))
		SLP_DXPS_Realtime_init()
	EndIf
	
	NVAR zStart=root:Package_SLP:DispXPS:RealtimePlot:RT_zStart
	NVAR zEnd=root:Package_SLP:DispXPS:RealtimePlot:RT_zEnd
	NVAR zStep=root:Package_SLP:DispXPS:RealtimePlot:RT_zStep
	NVAR hv=root:Package_SLP:DispXPS:RealtimePlot:RT_hv
	NVAR aWF=root:Package_SLP:DispXPS:RealtimePlot:RT_aWF
	
	NVAR ExposureTime=root:Package_SLP:DispXPS:RealtimePlot:ExposureTime
	NVAR FrameAvg=root:Package_SLP:DispXPS:RealtimePlot:FrameAvg
	NVAR TotalScanTime=root:Package_SLP:DispXPS:RealtimePlot:TotalScanTime
	
	NVAR BE_Flg=root:Package_SLP:DispXPS:RealtimePlot:BE_Flg
	
	SVAR MonitoredDirectory=root:Package_SLP:DispXPS:RealtimePlot:MonitoredDirectory
	
	Wave Spectrum_Cmbnd=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd
	Wave Spectrum_CmbndBE=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE
	Wave RealtimePlotW_DispLX=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
	Wave RealtimePlotW_DispLY=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY
	Wave CurrentImgW=root:Package_SLP:DispXPS:RealtimePlot:CurrentImgW
		
	DoWindow /K SLP_DispXPS_RT_Panel01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(279,116,902,694) /N=SLP_DispXPS_RT_Panel01
	ModifyPanel cbRGB=(60073,60071,60072)
	
	SetDrawLayer /W=SLP_DispXPS_RT_Panel01 UserBack
	DrawText /W=SLP_DispXPS_RT_Panel01 8,79,"Channeltron creation"
	SetDrawEnv /W=SLP_DispXPS_RT_Panel01 linethick= 0,linefgc= (11412,26273,41459),rounding= 15,fillfgc= (39321,46260,53456)
	DrawRRect /W=SLP_DispXPS_RT_Panel01 6,6,288,35
	SetDrawEnv /W=SLP_DispXPS_RT_Panel01 linethick= 0,linefgc= (65535,65535,65535)
	DrawRRect /W=SLP_DispXPS_RT_Panel01 9,9,45,32
	SetDrawEnv /W=SLP_DispXPS_RT_Panel01 fsize= 16,fstyle= 1
	DrawText /W=SLP_DispXPS_RT_Panel01 12,31,"SLP"
	SetDrawEnv /W=SLP_DispXPS_RT_Panel01 fsize= 16,fstyle= 1,textrgb= (65535,65535,65535)
	DrawText /W=SLP_DispXPS_RT_Panel01 50,31,"DispXPS: realtime XPS display"
	
	DrawText /W=SLP_DispXPS_RT_Panel01 9,140,"Energy correction"
	DrawText /W=SLP_DispXPS_RT_Panel01 466,139,"XPS intensity"
	DrawText /W=SLP_DispXPS_RT_Panel01 147,141,"XPS parameters"
	
	SetVariable RawData_Location,pos={9.00,38.00},size={498.00,14.00},title="Data location"
	SetVariable RawData_Location,limits={-inf,inf,0},value= root:Package_SLP:DispXPS:RealtimePlot:MonitoredDirectory
	Button Browse,pos={513.00,34.00},size={60.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Browse..",fSize=10
	Button Settings,pos={555.00,8.00},size={60.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Settings..",fSize=10

	Button EditDispL,pos={130.00,60.00},size={100.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Edit dispersive line"
	Button EditDispL,fSize=10
	Button EditDispL_Save,pos={234.00,60.00},size={35.00,20.00},disable=2,proc=ButtonProc_DXPS_Realtime,title="Save"
	Button EditDispL_Save,fSize=10,fColor=(65535,0,0)
	
	//DISP line creation
	SetVariable SetVar_Offset,pos={11.00,86.00},size={100.00,14.00},proc=SetVarProc_DXPS_Realtime,title="Offset"
	SetVariable SetVar_Offset,value= root:Package_SLP:DispXPS:RealtimePlot:RT_Offset,noedit= 1
	SetVariable SetVar_LPLength,pos={11.00,101.00},size={100.00,14.00},proc=SetVarProc_DXPS_Realtime,title="LP Length"
	SetVariable SetVar_LPLength,value= root:Package_SLP:DispXPS:RealtimePlot:RT_LPLength
	SetVariable SetVar_NLines,pos={121.00,86.00},size={100.00,14.00},proc=SetVarProc_DXPS_Realtime,title="No. of Lines"
	SetVariable SetVar_NLines,value= root:Package_SLP:DispXPS:RealtimePlot:RT_NLines
	SetVariable SetVar_LPWidth,pos={121.00,101.00},size={100.00,14.00},proc=SetVarProc_DXPS_Realtime,title="LP Width"
	SetVariable SetVar_LPWidth,value= root:Package_SLP:DispXPS:RealtimePlot:RT_LPWidth
	
	//Energy correction
	SetVariable SetVar_DispFactor,pos={10.00,144.00},size={120.00,14.00},proc=SetVarProc_DXPS_Realtime,title="Disp. Factor"
	SetVariable SetVar_DispFactor,limits={-100,100,0.0005},value= root:Package_SLP:DispXPS:RealtimePlot:RT_DispFactor
	SetVariable SetVar_CenterPointX,pos={10.00,161.00},size={120.00,16.00},proc=SetVarProc_DXPS_Realtime,title="X\\B0"
	SetVariable SetVar_CenterPointX,value= root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointX
	SetVariable SetVar_CenterPointY,pos={10.00,178.00},size={120.00,16.00},proc=SetVarProc_DXPS_Realtime,title="Y\\B0"
	SetVariable SetVar_CenterPointY,value= root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointY
	
	//XPS Param.
	SetVariable SetVar_STVStart,pos={146.00,145.00},size={120.00,14.00},proc=SetVarProc_DXPS_Realtime,title="STV Start"
	SetVariable SetVar_STVStart,valueBackColor=(61166,61166,61166)
	SetVariable SetVar_STVStart,limits={-100,100,0},value= root:Package_SLP:DispXPS:RealtimePlot:RT_zStart,noedit= 1
	SetVariable SetVar_STVEnd,pos={146.00,162.00},size={120.00,14.00},proc=SetVarProc_DXPS_Realtime,title="STV End"
	SetVariable SetVar_STVEnd,valueBackColor=(61166,61166,61166)
	SetVariable SetVar_STVEnd,limits={-100,100,0},value= root:Package_SLP:DispXPS:RealtimePlot:RT_zEnd,noedit= 1
	SetVariable SetVar_STVStep,pos={146.00,180.00},size={120.00,14.00},proc=SetVarProc_DXPS_Realtime,title="STV Step"
	SetVariable SetVar_STVStep,valueBackColor=(61166,61166,61166)
	SetVariable SetVar_STVStep,limits={-100,100,0},value= root:Package_SLP:DispXPS:RealtimePlot:RT_zStep,noedit= 1
	SetVariable SetVar_hv,pos={146.00,197.00},size={120.00,14.00},proc=SetVarProc_DXPS_Realtime,title="hv"
	SetVariable SetVar_hv,limits={0,1500,1},value= root:Package_SLP:DispXPS:RealtimePlot:RT_hv
	SetVariable SetVar_aWF,pos={146.00,215.00},size={120.00,14.00},proc=SetVarProc_DXPS_Realtime,title="aWF"
	SetVariable SetVar_aWF,limits={-100,100,0.1},value= root:Package_SLP:DispXPS:RealtimePlot:RT_aWF
	
	//DISP. line image display
	Display/W=(273,64,450,230)/HOST=SLP_DispXPS_RT_Panel01 /N=RealTimeImage /T RealtimePlotW_DispLY vs RealtimePlotW_DispLX
	AppendImage/T CurrentImgW
	ModifyImage CurrentImgW ctab= {*,*,Grays,0}
	ModifyGraph margin=5,tick=2,mirror=1,nticks=10,minor=1,noLabel=1,fSize=9,standoff=0,tkLblRot(left)=90,btLen=3,tlOffset=-2
	SetAxis/A/R left
	
	//Monitor button
	SetDrawEnv /W=SLP_DispXPS_RT_Panel01 linethick=0,fillfgc= (39321,46260,53456)
	DrawRRect /W=SLP_DispXPS_RT_Panel01 463,56,609,110
	Button Button_Monitoring,pos={472.00,64.00},size={130.00,21.00},proc=ButtonProc_DXPS_Realtime,title="Ready"
	Button Button_Monitoring,fSize=12,fColor=(0,65535,0)
	If (StringMatch(MonitoredDirectory,""))
		Button Button_Monitoring, disable=2
	EndIf
	
	TitleBox DescriptionBox,pos={475.00,91.00},size={83.00,11.00},title="Press to start monitoring"
	TitleBox DescriptionBox,frame=0
	
	//Intensity
	SetVariable SetVar_ImageInt,pos={463.00,142.00},size={144.00,28.00},proc=SetVarProc_DXPS_Realtime,title=" "
	SetVariable SetVar_ImageInt,fSize=20,fStyle=1
	SetVariable SetVar_ImageInt,limits={-inf,inf,0},value= root:Package_SLP:DispXPS:RealtimePlot:XPSIntensity,noedit= 1
	SetVariable SetVar_EstRemTime,pos={464.00,175.00},size={150.00,16.00},proc=SetVarProc_DXPS_Realtime,title="Est. time left (min)"
	SetVariable SetVar_EstRemTime,fSize=10,fStyle=1
	SetVariable SetVar_EstRemTime,limits={-inf,inf,0},value= root:Package_SLP:DispXPS:RealtimePlot:EstTimeLeft,noedit= 1
	CheckBox CheckBox_BE,pos={462.00,196.00},size={36.00,16.00},proc=CheckProc_DXPS_Realtime,title="B.E."
	CheckBox CheckBox_BE,fSize=10
	CheckBox CheckBox_BE,variable= root:Package_SLP:DispXPS:RealtimePlot:BE_Flg
	CheckBox CheckBox_PeakID,pos={461.00,216.00},size={104.00,16.00},proc=CheckProc_DXPS_Realtime,title="Peak assignments"
	CheckBox CheckBox_PeakID,fSize=10
	CheckBox CheckBox_PeakID,variable= root:Package_SLP:DispXPS:RealtimePlot:PkAssign_Flg
	
	//XPS spectrum
	Display/W=(9,234,614,542)/HOST=SLP_DispXPS_RT_Panel01 /N=RealTimePlot 
	ModifyGraph wbRGB=(58805,58803,58804),gbRGB=(39321,46260,53456)
	ModifyGraph tick=2
	ModifyGraph mirror=1
	ModifyGraph minor=1
	If (BE_Flg)
		Appendtograph /W=SLP_DispXPS_RT_Panel01#RealTimePlot Spectrum_CmbndBE
		Label /W=SLP_DispXPS_RT_Panel01#RealTimePlot bottom "Binding energy (eV)"
		SetAxis /W=SLP_DispXPS_RT_Panel01#RealTimePlot/A/R bottom
	Else	
		Appendtograph /W=SLP_DispXPS_RT_Panel01#RealTimePlot Spectrum_Cmbnd
		Label /W=SLP_DispXPS_RT_Panel01#RealTimePlot bottom "STV (eV)"
	EndIf
	Label left "Intensity (a.u.)"

	
	//Export data and done buttons
	Button Export,pos={354.00,549.00},size={100.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Export spectrum"
	Button Export,fSize=10
	Button Done,pos={549.00,548.00},size={60.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Done"
	Button Done,fSize=10
	
	//Scan note
	SetVariable SetVar_ScanNote,pos={13.00,550.00},size={300.00,18.00},proc=SetVarProc_DXPS_Realtime,title="Scan note"
	SetVariable SetVar_ScanNote,fSize=12
	SetVariable SetVar_ScanNote,limits={-100,100,0.001},value= root:Package_SLP:DispXPS:RealtimePlot:ScanNote
	
	//Cursor Hook
	setwindow SLP_DispXPS_RT_Panel01,hook(PkAsgn)=SLP_DXPS_Realtime_CursorHook
	
	//[ADDED: 06.04.2021]
	//Send data to DispXPS main module.
	Button Send2DXPS,pos={459.00,549.00},size={80.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Send to DXPS"
	Button Send2DXPS,fSize=10
	
	//Compare with another XPS spectrum
	Button Compare,pos={8.00,211.00},size={75.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Compare to.."
	Button Compare,fSize=10
	Button RemoveCompare,pos={90.00,211.00},size={50.00,20.00},proc=ButtonProc_DXPS_Realtime,title="Remove"
	Button RemoveCompare,fSize=10

	
End

Function SLP_DXPS_Realtime_Compare(Compare_Flg)
	//Descriptions: Add or remove a wave to compare features in the current spectrum
	//CREATED: 06.04.2021
	Variable Compare_Flg //Flag whether to add a wave to compare (flg=1) or remove the compare wave from display (flg=0) 
	
	If (WhichListItem("Spectrum_Compare",TraceNameList("SLP_DispXPS_RT_Panel01#RealTimePlot",";",1),";")!=-1) //If Spectrum Compare instance is in the graph
		RemoveFromGraph /W=SLP_DispXPS_RT_Panel01#RealTimePlot Spectrum_Compare
	EndIf
	
	If (Compare_Flg)
		CreateBrowser prompt="Select a wave to be plotted in the display", showWaves=1, showVars=0, showStrs=0
		String DataW_FName=""
		if(V_Flag!=0)
			DataW_FName=stringfromlist(0,S_BrowserList)
			Wave DataW=$DataW_FName
			Duplicate /O DataW,root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Compare
		EndIf
		Appendtograph /W=SLP_DispXPS_RT_Panel01#RealTimePlot root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Compare
		Modifygraph /W=SLP_DispXPS_RT_Panel01#RealTimePlot rgb(Spectrum_Compare)=(0,0,65535)
	EndIf
End



Function Panel_DXPS_Realtime_Settings() : Panel
	DoWindow /K SLP_DispXPS_RT_Settings01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(110,113,692,313) /N=SLP_DispXPS_RT_Settings01
	SetDrawLayer /W=SLP_DispXPS_RT_Settings01 UserBack
	DrawText /W=SLP_DispXPS_RT_Settings01 9,20,"Realtime DispXPS settings"
	ListBox list0,pos={8.00,23.00},size={568.00,152.00}
	ListBox list0,listWave=root:Package_SLP:DispXPS:RealtimePlot:Settings
	ListBox list0,selWave=root:Package_SLP:DispXPS:RealtimePlot:SettingsSel
	ListBox list0,widths={69,48,526},userColumnResize= 1
	Button SettingDone,pos={527.00,180.00},size={50.00,16.00},proc=ButtonProc_DXPS_Realtime_Settings_Done,title="Done"
	Button SettingDone,fSize=10
End

Function SLP_DXPS_BGProcess_XPSMonitoring(s)
	//DESCRIPTIONs: monitor a folder and look for a new file. Save the list of files to W_FileList
	//CREATED: 18.03.2021
	//MODIFIED: 05.04.2021 - Bug fix - Use MonitoredDirectory global string instead of the test folder (stuck during the dev.)
	STRUCT WMBackgroundStruct &s
	SVAR MonitoredDirectory=root:Package_SLP:DispXPS:RealtimePlot:MonitoredDirectory
	SLP_DXPS_Realtime_UpdateSpectrum(MonitoredDirectory)
	
	return 0
End

Function SLP_DXPS_BGProcess_Monitor_Start()
	//DESCRIPTION: start background process to monitor new .tif image files
	//CREATED: 18.03.2021
	NVAR UpdatePeriod=root:Package_SLP:DispXPS:RealtimePlot:UpdatePeriod //update period in seconds
	Variable numTicks = UpdatePeriod*60 	// Run every 5 seconds (60 ticks)
	CtrlNamedBackground DXPS_BGProcess_Monitor, period=numTicks, proc=SLP_DXPS_BGProcess_XPSMonitoring
	CtrlNamedBackground DXPS_BGProcess_Monitor, start
	Print "DispXPS background process started"
End

Function SLP_DXPS_BGProcess_Monitor_Stop()
	//DESCRIPTION: stop background process that monitors new .tif image files
	//CREATED: 18.03.2021
	CtrlNamedBackground DXPS_BGProcess_Monitor, stop
	Print "DispXPS background process stopped"
End

Function SLP_DXPS_Realtime_init()
	//DESCRIPTIONs: initialize realtime DispXPS module
	//CREATED: 18.03.2021
	string Current_folder=getdatafolder(1)
	NewDataFolder /O  root:Package_SLP:DispXPS:RealtimePlot
	SetDataFolder root:Package_SLP:DispXPS:RealtimePlot
	
	//Create a setting wave
	SLP_DXPS_Realtime_Settings()
	Wave /T SettingsW=root:Package_SLP:DispXPS:RealtimePlot:Settings
	
	variable /G RT_Threshold=2000
	variable /G RT_MinSize=1000
	variable /G RT_Offset=20
	variable /G RT_LPLength=20
	variable /G RT_LPWidth=5
	variable /G RT_NLines=25
	variable /G RT_DispFactor=0.0305
	variable /G RT_CenterPointX=150
	variable /G RT_CenterPointY=150	
	Variable /G RT_DispFactor=0.0255
	
	Variable /G RT_zStart=0
	Variable /G RT_zEnd=0
	Variable /G RT_zStep=0
	Variable /G RT_hv=0
	Variable /G RT_aWF=4
	
	variable /G N_DataPoints=0
	variable /G N_NewImages=0
	variable /G CurrentDataPnt=0
	
	String /G ImgFileList_old=""
	String /G ImgFileList_current=""
	
	String /G MonitoredDirectory=""
	String /G ScanFolderName=""
	String /G ScanNote="<Enter notes here>"
	
	String /G State="Ready"
	Variable /G IdleTime=0	
	Variable /G Timeout=str2num(SettingsW[0][1])
	Variable /G UpdatePeriod=str2num(SettingsW[1][1])
	
	Variable /G BE_Flg=1
	Variable /G PkAssign_Flg=0
	
	Variable /G XPSIntensity=0
	Variable /G EstTimeLeft=0
	Variable /G ExposureTime=1000
	Variable /G FrameAvg=2
	Variable /G TotalScanTime=0
	
	Variable /G CursorPos=0
	
	Make /O/N=128 RealtimePlotW
	Make /O/N=2 RealtimePlotW_DispLX
	Make /O/N=2 RealtimePlotW_DispLY
	Make /O/N=1 RealtimePlotW_PLCoord

	Make /O/N=(2,2) CurrentImgW //[Bug fix: 20210406]
	Make /O/N=16 Spectrum_CmbndBE
	Make /O/N=16 Spectrum_Cmbnd
	Make /O/N=16 Spectrum_Compare
	
	RealtimePlotW_DispLX={200,342}
	RealtimePlotW_DispLY={481,41}
	
	Setdatafolder $Current_folder
	
End

Function SLP_DXPS_Realtime_SendToDXPS()
	//DESCRIPTIONs: Send the realtime DXPS scan data to the main DXPS panel
	//CREATED: 06.04.2021

	//Main DXPS wave
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	wave /T SLP_DXPS_ScanListDisplayW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplayW
	wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	
	//Realtime DXPS waves and global variables
	SVAR MonitoredDirectory=root:Package_SLP:DispXPS:RealtimePlot:MonitoredDirectory
	SVAR State=root:Package_SLP:DispXPS:RealtimePlot:State
	SVAR ImgFileList_old=root:Package_SLP:DispXPS:RealtimePlot:ImgFileList_old
	NVAR IdleTime=root:Package_SLP:DispXPS:RealtimePlot:IdleTime
	Wave CurrentImgW=root:Package_SLP:DispXPS:RealtimePlot:CurrentImgW
	SVAR ScanFolderName=root:Package_SLP:DispXPS:RealtimePlot:ScanFolderName
	SVAR ScanNote=root:Package_SLP:DispXPS:RealtimePlot:ScanNote
	
	NVAR RT_Threshold=root:Package_SLP:DispXPS:RealtimePlot:RT_Threshold
	NVAR RT_MinSize=root:Package_SLP:DispXPS:RealtimePlot:RT_MinSize
	NVAR RT_Offset=root:Package_SLP:DispXPS:RealtimePlot:RT_Offset
	NVAR RT_LPLength=root:Package_SLP:DispXPS:RealtimePlot:RT_LPLength
	NVAR RT_LPWidth=root:Package_SLP:DispXPS:RealtimePlot:RT_LPWidth
	NVAR RT_NLines=root:Package_SLP:DispXPS:RealtimePlot:RT_NLines
	NVAR RT_DispFactor=root:Package_SLP:DispXPS:RealtimePlot:RT_DispFactor
	NVAR RT_CenterPointX=root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointX
	NVAR RT_CenterPointY=root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointY
	NVAR RT_zStart=root:Package_SLP:DispXPS:RealtimePlot:RT_zStart
	NVAR RT_zEnd=root:Package_SLP:DispXPS:RealtimePlot:RT_zEnd
	NVAR RT_zStep=root:Package_SLP:DispXPS:RealtimePlot:RT_zStep
	NVAR RT_hv=root:Package_SLP:DispXPS:RealtimePlot:RT_hv
	NVAR RT_aWF=root:Package_SLP:DispXPS:RealtimePlot:RT_aWF
	NVAR BE_Flg=root:Package_SLP:DispXPS:RealtimePlot:BE_Flg
	NVAR PkAssign_Flg=root:Package_SLP:DispXPS:RealtimePlot:PkAssign_Flg
	
	Wave RealtimePlotW_DispLX=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
	Wave RealtimePlotW_DispLY=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY
	Wave RealtimePlotW_PLCoord=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_PLCoord
	
	Wave Spectrum_Cmbnd=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd
	Wave Spectrum_CmbndBE=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE
	
	Wave FirstImgW=root:Package_SLP:DispXPS:RealtimePlot:FirstImgW
	
	String VolName=ScanFolderName
	Prompt VolName, "Scan name"
	DoPrompt "Enter a new name", VolName
	//Check ScanName
	Do
		If (!Stringmatch(VolName,CleanUpName(VolName,0))||datafolderexists("root:Package_SLP:DispXPS:"+VolName)) //Check if name is legal. CheckName returns 0 if it is ok.
			doalert 1,"Illegal or duplicated scan name. Do you want to choose a new scan name?"
			if (V_flag==2) //If users don't want to continue
				Return 0 //Exit
			Else
				Prompt VolName, "Scan name"
				DoPrompt "Enter a new name", VolName
				If (V_Flag)
					Return 0 //Exit
				EndIf
			EndIf	
		Endif
	While (!Stringmatch(VolName,CleanUpName(VolName,0))||datafolderexists("root:Package_SLP:DispXPS:"+VolName))
	
	//If the scan name is legal and not the same as ones already exist
	string PkgFolder_FName="root:Package_SLP:DispXPS:"+VolName
	NewDataFolder /O $PkgFolder_FName
	
	variable N_Scans=Dimsize(SLP_DXPS_ScanListW,0)
	redimension /N=(dimsize(SLP_DXPS_ScanListW,0)+1,dimsize(SLP_DXPS_ScanListW,1)) SLP_DXPS_ScanListW
	redimension /N=(dimsize(SLP_DXPS_ScanListDisplayW,0)+1,dimsize(SLP_DXPS_ScanListDisplayW,1)) SLP_DXPS_ScanListDisplayW
	redimension /N=(dimsize(SLP_DXPS_ScanListDisplaySelW,0)+1,dimsize(SLP_DXPS_ScanListDisplaySelW,1)) SLP_DXPS_ScanListDisplaySelW
	
	SLP_DXPS_ScanListW[N_Scans][0]=VolName //Name of the scan (= wave name)
	SLP_DXPS_ScanListW[N_Scans][1]="root:Package_SLP:DispXPS:"+VolName+":" //Where the Raw file is saved
	SLP_DXPS_ScanListW[N_Scans][2]=MonitoredDirectory //The raw data directory on the computer
	SLP_DXPS_ScanListW[N_Scans][3]=date()+time()
	SLP_DXPS_ScanListW[N_Scans][4]=date()+time()
	SLP_DXPS_ScanListW[N_Scans][5]=num2str(RT_Threshold)
	SLP_DXPS_ScanListW[N_Scans][6]=num2str(RT_MinSize)
	SLP_DXPS_ScanListW[N_Scans][7]=num2str(RT_Offset)
	SLP_DXPS_ScanListW[N_Scans][8]=num2str(RT_LPLength)
	SLP_DXPS_ScanListW[N_Scans][9]=num2str(RT_LPWidth)
	SLP_DXPS_ScanListW[N_Scans][10]=num2str(RT_NLines)
	SLP_DXPS_ScanListW[N_Scans][11]=num2str(RT_DispFactor)
	SLP_DXPS_ScanListW[N_Scans][12]=num2str(RT_CenterPointX)
	SLP_DXPS_ScanListW[N_Scans][13]=num2str(RT_CenterPointY)
	SLP_DXPS_ScanListW[N_Scans][14]=num2str(RT_zStart)
	SLP_DXPS_ScanListW[N_Scans][15]=num2str(RT_zEnd)
	SLP_DXPS_ScanListW[N_Scans][16]=num2str(RT_zStep)
	SLP_DXPS_ScanListW[N_Scans][17]=num2str(RT_hv)
	SLP_DXPS_ScanListW[N_Scans][18]=num2str(RT_aWF)
	
	//Dispersive line coordinates
	SLP_DXPS_ScanListW[N_Scans][19]=num2str(RealtimePlotW_DispLX[0])
	SLP_DXPS_ScanListW[N_Scans][20]=num2str(RealtimePlotW_DispLY[0])
	SLP_DXPS_ScanListW[N_Scans][21]=num2str(RealtimePlotW_DispLX[1])
	SLP_DXPS_ScanListW[N_Scans][22]=num2str(RealtimePlotW_DispLY[1])
	
	SLP_DXPS_ScanListW[N_Scans][25]="y" //Raw data deleted flag
	
	SLP_DXPS_ScanListW[N_Scans][26]=num2str(BE_Flg)
	SLP_DXPS_ScanListW[N_Scans][27]=num2str(PkAssign_Flg)
	//SLP_DXPS_ScanListW[N_Scans][28]="0.0" //CURSOR POS
	SLP_DXPS_ScanListW[N_Scans][29]="1" //Display XPS in PT by default
	SLP_DXPS_ScanListW[N_Scans][30]="0" //Not display Auger in PT by default
	
	SLP_DXPS_ScanListDisplayW[N_Scans][1]=VolName
	SLP_DXPS_ScanListDisplayW[N_Scans][2]=ScanNote
	SLP_DXPS_ScanListDisplaySelW[N_Scans][0]=32
	SLP_DXPS_ScanListDisplaySelW[N_Scans][2]=2
	
	Duplicate RealtimePlotW_DispLX,$(PkgFolder_FName+":"+VolName+"_DispLX")
	Duplicate RealtimePlotW_DispLY,$(PkgFolder_FName+":"+VolName+"_DispLY")
	Duplicate RealtimePlotW_PLCoord,$(PkgFolder_FName+":"+VolName+"_PLCoord")
	
	//Use 1st image for Intg and Th
	Duplicate root:Package_SLP:DispXPS:RealtimePlot:FirstImgW,$(PkgFolder_FName+":"+VolName+"_Intg")
	Duplicate root:Package_SLP:DispXPS:RealtimePlot:FirstImgW,$(PkgFolder_FName+":"+VolName+"_Th") /Wave=FirstImage_Th
	ImageThreshold /I/O/T=(RT_Threshold) FirstImage_Th

	//XPS spectrum
	Duplicate Spectrum_Cmbnd,$(PkgFolder_FName+":"+VolName+"_CmBnd")
	Duplicate Spectrum_CmbndBE,$(PkgFolder_FName+":"+VolName+"_CmBndBE")
	
	//Individual and 2D channeltron spectra
	Variable i=0
	Make /N=(Dimsize(Spectrum_Cmbnd,0),RT_NLines)$(PkgFolder_FName+":"+VolName+"_Spectra") /Wave=Spectra_2D
	For (i=0;i<RT_NLines;i+=1)
		Wave ChanneltronW=$("root:Package_SLP:DispXPS:RealtimePlot:Spectrum"+num2str(i))
		Duplicate ChanneltronW,$(PkgFolder_FName+":"+VolName+"_Spectra"+num2str(i))
		Spectra_2D[][i]=ChanneltronW[p]
	EndFor
End

Function SLP_DXPS_Realtime_Setup(MonitoredDirectory)
	//DESCRIPTIONS: Read .txt file in raw DXPS folder to set up monitoring parameters and prepare waves for real-time mornitoring.
	//CREATED: 18.03.2021
	//MODIFIED: 06.04.2021 - Return Txt_Found_Flg to indicate whether the function is able to locate .txt file in the selected DXPS data folder.
	
	String MonitoredDirectory
	NewPath /Q /O SLP_symbPath,MonitoredDirectory
	
	//CHECK SCAN PARAMETERS FROM .TXT FILE
	NVAR zStart=root:Package_SLP:DispXPS:RealtimePlot:RT_zStart
	NVAR zEnd=root:Package_SLP:DispXPS:RealtimePlot:RT_zEnd
	NVAR zStep=root:Package_SLP:DispXPS:RealtimePlot:RT_zStep
	NVAR hv=root:Package_SLP:DispXPS:RealtimePlot:RT_hv
	NVAR aWF=root:Package_SLP:DispXPS:RealtimePlot:RT_aWF
	
	NVAR ExposureTime=root:Package_SLP:DispXPS:RealtimePlot:ExposureTime
	NVAR FrameAvg=root:Package_SLP:DispXPS:RealtimePlot:FrameAvg
	NVAR TotalScanTime=root:Package_SLP:DispXPS:RealtimePlot:TotalScanTime
	
	
	//[ADDED: 06.04.2021]
	Variable Txt_Found_Flg=0
	SVAR ImgFileList_old=root:Package_SLP:DispXPS:RealtimePlot:ImgFileList_old
	ImgFileList_old="" //Reset ImgFileList_old
	
	//Automatic search for parameter from the text file
	string FileList1=indexedfile(SLP_symbPath,-1,".txt")
	//If .txt file is found..
	If (Strlen(FileList1)) 
		Txt_Found_Flg=1
		String ParamFile_Name=stringfromlist(0,indexedfile(SLP_symbPath,-1,".txt"),";")
		String ParamFile_FName=MonitoredDirectory+ParamFile_Name
		string ParamList=SLP_Util_ExtScanParam(File_FName=ParamFile_FName)
		zStart=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Start")),":")) //greplist is CASE SENSITIVE!
		zEnd=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV End")),":"))
		zStep=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Step")),":"))
		hv=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"Photon Energy")),":"))
		variable N_Steps=floor((zEnd-zStart)/zStep)+1
		TotalScanTime=ExposureTime*FrameAvg*N_Steps
	EndIf
	
	string FileList2=indexedfile(SLP_symbPath,-1,".tif")
	If (Strlen(FileList2))
		String ImgFileName=stringfromlist(0,FileList2,";")
		imageload /O/Q/T=tiff /P=SLP_symbPath ImgFileName
		String FirstImage_WName=stringfromlist(0,S_waveNames,";")
		Wave FirstImageW=$FirstImage_WName
		//Wave CurrentImgW=root:Package_SLP:DispXPS:RealtimePlot:CurrentImgW
		//CurrentImgW=FirstImageW
		Duplicate /O FirstImageW,root:Package_SLP:DispXPS:RealtimePlot:CurrentImgW
		Duplicate/O FirstImageW,root:Package_SLP:DispXPS:RealtimePlot:FirstImgW
		Killwaves FirstImageW
	EndIf
	
	NVAR RT_Offset=root:Package_SLP:DispXPS:RealtimePlot:RT_Offset
	NVAR RT_LPLength=root:Package_SLP:DispXPS:RealtimePlot:RT_LPLength
	NVAR RT_LPWidth=root:Package_SLP:DispXPS:RealtimePlot:RT_LPWidth
	NVAR RT_NLines=root:Package_SLP:DispXPS:RealtimePlot:RT_NLines
	
	NVAR RT_CenterPointX=root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointX
	NVAR RT_CenterPointY=root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointY

	NVAR RT_DispFactor=root:Package_SLP:DispXPS:RealtimePlot:RT_DispFactor

	//CREATE VIRTUAL CHANNELTRONS
	SLP_DXPS_Realtime_CreateMultiPLines()
	Wave PLineCoord=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_PLCoord
	
	//CREATE waves to store a spectrum for each virtual channeltron
	Variable i=0
	Variable ChanneltronPosX=0
	Variable ChanneltronPosY=0
	
	Variable EOffset=0
	String ChannneltronW_FName
	Wave RealtimePlotW_DispLX=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
	Wave RealtimePlotW_DispLY=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY
	Variable DispX1=RealtimePlotW_DispLX[0]
	Variable DispY1=RealtimePlotW_DispLY[0]
	Variable DispX2=RealtimePlotW_DispLX[1]
	Variable DispY2=RealtimePlotW_DispLY[1]
	
	//Create and setscale channeltron
	For (i=0;i<RT_NLines;i+=1)
		ChannneltronW_FName="root:Package_SLP:DispXPS:RealtimePlot:Spectrum"+num2str(i)
		Make /O/N=(N_Steps) $ChannneltronW_FName /Wave=ChanneltronW
		ChanneltronW=0
		
		//SetScale
		ChanneltronPosX=PLineCoord[i][0]
		ChanneltronPosY=PLineCoord[i][1]
		EOffset=SLP_DXPS_CalculateEOffset(ChanneltronPosX,ChanneltronPosY,RT_CenterPointX,RT_CenterPointY,DispX1,DispY1,DispX2,DispY2,RT_DispFactor)
		SetScale /P x,(zStart+EOffset),zStep,ChanneltronW
		
	EndFor
	
	//CREATE waves to store combined spectrum
	Make /O/N=(N_Steps) root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd /Wave=Spectrum_Cmbnd
	Make /O/N=(N_Steps) root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE /Wave=Spectrum_CmbndBE
	Spectrum_Cmbnd=0
	Spectrum_CmbndBE=0
	SetScale /P x,zStart,zStep,Spectrum_Cmbnd
	SetScale /P x,hv-zStart-aWF,-1*zStep,Spectrum_CmbndBE
	
	Return Txt_Found_Flg
End

Function SLP_DXPS_Realtime_CtronSetScaleMerge()
	//DESCRIPTIONs: 	Create virtual channeltron display (an array of green lines) in the realtime DispXPS image (dispersion line) 
	//						and set scale using dispersion factor and center energy point. Also SetScale and merge all channeltron data into Combnd plot.
	//						The function is used when users adjust the SetVar
	//CREATED: 19.03.2021
	NVAR RT_NLines=root:Package_SLP:DispXPS:RealtimePlot:RT_NLines
	NVAR RT_CenterPointX=root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointX
	NVAR RT_CenterPointY=root:Package_SLP:DispXPS:RealtimePlot:RT_CenterPointY
	NVAR RT_DispFactor=root:Package_SLP:DispXPS:RealtimePlot:RT_DispFactor
	
	NVAR zStart=root:Package_SLP:DispXPS:RealtimePlot:RT_zStart
	NVAR zEnd=root:Package_SLP:DispXPS:RealtimePlot:RT_zEnd
	NVAR zStep=root:Package_SLP:DispXPS:RealtimePlot:RT_zStep
	NVAR hv=root:Package_SLP:DispXPS:RealtimePlot:RT_hv
	NVAR aWF=root:Package_SLP:DispXPS:RealtimePlot:RT_aWF
	
	Variable EOffset=0
	String ChannneltronW_FName
	Wave RealtimePlotW_DispLX=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
	Wave RealtimePlotW_DispLY=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY
	Variable DispX1=RealtimePlotW_DispLX[0]
	Variable DispY1=RealtimePlotW_DispLY[0]
	Variable DispX2=RealtimePlotW_DispLX[1]
	Variable DispY2=RealtimePlotW_DispLY[1]
	
	//SetScale spectrum waves (KE and BE)
	Wave Spectrum_Cmbnd=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd
	Wave Spectrum_CmbndBE=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE
	SetScale /P x,zStart,zStep,Spectrum_Cmbnd
	SetScale /P x,hv-zStart-aWF,-1*zStep,Spectrum_CmbndBE
	Duplicate /O Spectrum_Cmbnd,root:Package_SLP:DispXPS:RealtimePlot:Spectrum_DataCounts /WAVE=Spectrum_DataCounts
	Spectrum_DataCounts=0
	
	Variable i,j
	Variable ChanneltronPosX,ChanneltronPosY
	Wave PLineCoord=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_PLCoord
	//Setscale channeltron
	For (i=0;i<RT_NLines;i+=1)
		ChannneltronW_FName="root:Package_SLP:DispXPS:RealtimePlot:Spectrum"+num2str(i)
		Wave ChanneltronW=$ChannneltronW_FName
		ChanneltronPosX=PLineCoord[i][0]
		ChanneltronPosY=PLineCoord[i][1]
		EOffset=SLP_DXPS_CalculateEOffset(ChanneltronPosX,ChanneltronPosY,RT_CenterPointX,RT_CenterPointY,DispX1,DispY1,DispX2,DispY2,RT_DispFactor)
		SetScale /P x,(zStart+EOffset),zStep,ChanneltronW
		//Merge virtual channeltron data.
		For (j=0;j<dimsize(Spectrum_Cmbnd,0);j+=1)
			If (pnt2x(Spectrum_Cmbnd,j)>=dimoffset(ChanneltronW,0)&&pnt2x(Spectrum_Cmbnd,j)<=dimoffset(ChanneltronW,0)+(dimsize(ChanneltronW,0)-1)*dimdelta(ChanneltronW,0))
				Spectrum_Cmbnd[j]+=ChanneltronW(pnt2x(Spectrum_Cmbnd,j))
				Spectrum_DataCounts[j]+=1					
			EndIf
		EndFor
	EndFor
	Spectrum_Cmbnd/=Spectrum_DataCounts
	Spectrum_CmbndBE[]=Spectrum_Cmbnd[p]
End

Function SLP_DXPS_Realtime_UpdateSpectrum(MonitoredDirectory)
	//DESCRIPTIONs: This is the actual function in the background process. The function will check whehter there are new data after certain period (now set at 3 seconds).
	//						If so, it will continue processing the new data and add that to the spectrum display.
	//						It also counts the time that no new images are added to automatically stop the background process when the scan finishes.
	//CREATED: 18.03.2021
	String MonitoredDirectory
	
	Wave /T SettingsW=root:Package_SLP:DispXPS:RealtimePlot:Settings
	
	SVAR ImgFileList_current=root:Package_SLP:DispXPS:RealtimePlot:ImgFileList_current
	SVAR ImgFileList_old=root:Package_SLP:DispXPS:RealtimePlot:ImgFileList_old
	
	NVAR N_DataPoints=root:Package_SLP:DispXPS:RealtimePlot:N_DataPoints
	NVAR N_NewImages=root:Package_SLP:DispXPS:RealtimePlot:N_NewImages
	NVAR CurrentDataPnt=root:Package_SLP:DispXPS:RealtimePlot:CurrentDataPnt
	
	NVAR RT_NLines=root:Package_SLP:DispXPS:RealtimePlot:RT_NLines
	NVAR RT_LPWidth=root:Package_SLP:DispXPS:RealtimePlot:RT_LPWidth
	
	NVAR IdleTime=root:Package_SLP:DispXPS:RealtimePlot:IdleTime
	NVAR Timeout=root:Package_SLP:DispXPS:RealtimePlot:Timeout
	NVAR UpdatePeriod=root:Package_SLP:DispXPS:RealtimePlot:UpdatePeriod
	Timeout=str2num(SettingsW[0][1])
	UpdatePeriod=str2num(SettingsW[1][1])
	
	
	NVAR XPSIntensity=root:Package_SLP:DispXPS:RealtimePlot:XPSIntensity
	NVAR EstTimeLeft=root:Package_SLP:DispXPS:RealtimePlot:EstTimeLeft
	NVAR TotalScanTime=root:Package_SLP:DispXPS:RealtimePlot:TotalScanTime
	NVAR ExposureTime=root:Package_SLP:DispXPS:RealtimePlot:ExposureTime
	NVAR FrameAvg=root:Package_SLP:DispXPS:RealtimePlot:FrameAvg
	
	Variable PreviousDataPoint=0
	
	NewPath /Q /O SLP_symbPath, MonitoredDirectory
	
	ImgFileList_current=indexedFile(SLP_symbPath,-1,".tif")
	ImgFileList_current=sortlist(ImgFileList_current,";",16) //Option '16' is 'case-insensitive alphanumeric sort that sorts wave0 and wave9 before wave10.'
	CurrentDataPnt=itemsinlist(ImgFileList_current,";")-1
	PreviousDataPoint=itemsinlist(ImgFileList_old,";")-1
	N_NewImages=CurrentDataPnt-PreviousDataPoint
	
	If (N_NewImages==0)
		//SEE IF IDLE time > timeout
		IdleTime+=UpdatePeriod
		If (IdleTime>TimeOut)
			SLP_DXPS_Realtime_StateFinished()
		EndIf
	ElseIf (N_NewImages>0)
		IdleTime=0 //Reset idle time
		Variable i,j
		String ImgFileName
		String ImgWName
		
		string Current_folder=getdatafolder(1)
		SetDataFolder root:Package_SLP:DispXPS:RealtimePlot:
		
		Make /O/N=2 CDL_pLX
		Make /O/N=2 CDL_pLY
		Wave PLineCoord=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_PLCoord
		Wave Spectrum_Cmbnd=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd
		Wave Spectrum_CmbndBE=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE
		
		Duplicate /O Spectrum_Cmbnd,root:Package_SLP:DispXPS:RealtimePlot:Spectrum_DataCounts /WAVE=Spectrum_DataCounts
		Spectrum_DataCounts=0
		Spectrum_Cmbnd=0
		String ChannneltronW_FName
		//Variable Counts=0
		
		For (i=PreviousDataPoint+1;i<=CurrentDataPnt;i+=1)
			ImgFileName=stringfromlist(i,ImgFileList_current,";")
			imageload /O/N=CurrentImgW/Q/T=tiff /P=SLP_symbPath ImgFileName
			ImgWName=stringfromlist(0,S_waveNames,";")
			XPSIntensity=0
			For (j=0;j<RT_NLines;j+=1)
				CDL_pLX[0]=PLineCoord[j][2]
				CDL_pLY[0]=PLineCoord[j][3]
				CDL_pLX[1]=PLineCoord[j][4]
				CDL_pLY[1]=PLineCoord[j][5]
				ImageLineProfile/SC srcWave=$ImgWName, xWave=CDL_pLX, yWave=CDL_pLY, width=RT_LPWidth
				wave W_ImageLineProfile
				
				//Replace NaN with zero
				MatrixOp /O W_ImageLineProfile=replace(W_ImageLineProfile,NaN,0)
				ChannneltronW_FName="root:Package_SLP:DispXPS:RealtimePlot:Spectrum"+num2str(j)
				Wave ChannneltronW=$ChannneltronW_FName
				ChannneltronW[i]=Sum(W_ImageLineProfile)/dimsize(W_ImageLineProfile,0) //Create an average value
				XPSIntensity+=ChannneltronW[i]
			EndFor
			XPSIntensity=round(XPSIntensity/RT_NLines)
			EstTimeLeft=floor((TotalScanTime-(i*ExposureTime*FrameAVg))/(1000*60))
		EndFor
		
		//MERGE channeltron spectra
		For (j=0;j<RT_NLines;j+=1)
			ChannneltronW_FName="root:Package_SLP:DispXPS:RealtimePlot:Spectrum"+num2str(j)
			Wave ChannneltronW=$ChannneltronW_FName
			//Check whether x is withing the range of ChanneltronW
			For (i=0;i<dimsize(Spectrum_Cmbnd,0);i+=1)
				If (pnt2x(Spectrum_Cmbnd,i)>=dimoffset(ChannneltronW,0)&&pnt2x(Spectrum_Cmbnd,i)<=dimoffset(ChannneltronW,0)+(dimsize(ChannneltronW,0)-1)*dimdelta(ChannneltronW,0))
					Spectrum_Cmbnd[i]+=ChannneltronW(pnt2x(Spectrum_Cmbnd,i))
					Spectrum_DataCounts[i]+=1					
				EndIf
			EndFor
		EndFor
		
		Spectrum_Cmbnd/=Spectrum_DataCounts
		Spectrum_CmbndBE[]=Spectrum_Cmbnd[p]
		
		ImgFileList_old=ImgFileList_current
		SetDataFolder $Current_folder
	EndIf
End

Function SLP_UTIL_DispPeakAssign(WindowName,Show_Flg,BE_Flg,hv,aWF,BE_Window)
	//DESCRIPTIONs: show/hide textboxes with suggested peak assignments
	//CREATED: 21.03.2021
	String WindowName
	Variable Show_Flg //Show or hide
	Variable BE_Flg //whether the x axis is in BE or KE 
	Variable hv,aWF //To calculate BE_Pos, KE_Pos for SLP_Util_FindElement and SLP_Util_FindAuger
	variable BE_Window //Energy window for peak assignment suggestion
	
	Variable X_Pos=0
	Variable BE_Pos=0
	Variable KE_Pos=0
	
	If (Show_Flg) //SHOW peak assignment textboxes
		X_Pos=xcsr(A,WindowName)
		If (BE_Flg==1) //BE is used
			BE_Pos=X_Pos
			KE_Pos=hv-X_Pos-aWF
		Else //KE is used - change KE to BE
			BE_Pos=hv-X_Pos-aWF //convert to BE before looking up the BE table
			KE_Pos=X_Pos
		Endif
		TextBox /C/W=$WindowName /N=PeakAssignment1  SLP_Util_FindElement(BE_Pos,BE_Window)
		TextBox /A=LT /C/W=$WindowName /N=PeakAssignment2  SLP_Util_FindAuger(KE_Pos,BE_Window)
		
	Else //HIDE textboxes
		Cursor /K/W=$WindowName A
		TextBox/K/W=$WindowName /N=PeakAssignment1	
		TextBox/K/W=$WindowName /N=PeakAssignment2			
	EndIf
End

Function SLP_DXPS_Realtime_CursorHook(s) 
	//DESCRIPTIONs: CursorHook FUNCTION to see peak assignment suggestions at different energy by moving a cursor
	//CREATED: 20.03.2021
	STRUCT WMWinHookStruct &s
	Variable hookResult = 0
		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_DispXPS_RT_Panel01 activeSW
				String activeSubwindow = S_value
				//Hook for Display peak assignment
				if (CmpStr(activeSubwindow,"SLP_DispXPS_RT_Panel01#RealTimePlot") == 0&&!stringmatch("",CsrInfo(A,"SLP_DispXPS_RT_Panel01#RealTimePlot")))
					Wave /T SettingsW=root:Package_SLP:DispXPS:RealtimePlot:Settings
					//Variable BE_Window=2
					Variable BE_Window=str2num(SettingsW[2][1])
					NVAR BE_Flg=root:Package_SLP:DispXPS:RealtimePlot:BE_Flg
					NVAR hv=root:Package_SLP:DispXPS:RealtimePlot:RT_hv
					NVAR aWF=root:Package_SLP:DispXPS:RealtimePlot:RT_aWF
					NVAR CursorPos=root:Package_SLP:DispXPS:RealtimePlot:CursorPos
					SLP_UTIL_DispPeakAssign("SLP_DispXPS_RT_Panel01#RealTimePlot",1,BE_Flg,hv,aWF,BE_Window)
					CursorPos=pcsr(A,"SLP_DispXPS_RT_Panel01#RealTimePlot")
				Endif
				break
		endswitch
	return hookResult		// 0 if nothing done, else 1
End

Function SLP_DXPS_CreateSpectra(VolName,LPWidth)
	//DESCRIPTIONs: create spectra from virtual channeltrons which have been setup by SLP_DXPS_CreateMultiPLines
	//MODIFIED: 18.03.2021 - modified for Realtime display of DXPS.
	String VolName
	variable LPWidth
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	
	String ImgVolW_FName
	If (StringMatch(VolName,"RealtimePlotW")) //[MODIFIED: 18.03.2021]
		ImgVolW_FName="root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW"
	Else
		ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	EndIf
	
	string PLineCoord_FName=ImgVolW_FName+"_PLCoord"
	string Spectra_W_Name=ImgVolW_FName+"_Spectra"
	
	Wave ImgVolW=$ImgVolW_FName
	Wave PLineCoord=$PLineCoord_FName
	
	//Move to the data folder
	string CurrentFolder=GetDataFolder(1)
	setDataFolder SLP_DXPS_ScanListW[DataRow][1]
		
	variable i,j
	variable N_steps=dimsize(ImgVolW,2)
	variable N_pLines=dimsize(PLineCoord,0)
	
	Make /O/N=(N_steps,N_pLines) $Spectra_W_Name /WAVE=Spectra_W
	Make /O/N=2 CDL_pLX
	Make /O/N=2 CDL_pLY
		
	For (i=0;i<N_steps;i+=1)
		For (j=0;j<N_pLines;j+=1)
			CDL_pLX[0]=PLineCoord[j][2]
			CDL_pLY[0]=PLineCoord[j][3]
			CDL_pLX[1]=PLineCoord[j][4]
			CDL_pLY[1]=PLineCoord[j][5]
			ImageLineProfile/SC /P=(i) srcWave=ImgVolW, xWave=CDL_pLX, yWave=CDL_pLY, width=LPWidth
			wave W_ImageLineProfile
			
			//Replace NaN with zero
			MatrixOp /O W_ImageLineProfile=replace(W_ImageLineProfile,NaN,0)
			
			Spectra_W[i][j]=Sum(W_ImageLineProfile)/dimsize(W_ImageLineProfile,0)	
		EndFor
		
	EndFor
	variable cetemp=dimdelta(ImgVolW,2)
	setscale /P x,dimoffset(ImgVolW,2),dimdelta(ImgVolW,2),Spectra_W
	
	Duplicate /O Spectra_W,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg3
	string ImageName=stringfromlist(0,ImageNameList("SLP_DispXPS_Panel_01#2DSpectra", ";" ))
	ModifyImage /W=SLP_DispXPS_Panel_01#DX_2DSpectra $ImageName ctab= {*,*,Rainbow,0}

	//Go back to the previous folder
	SetDataFolder CurrentFolder
End

Function SLP_DXPS_Realtime_CreateMultiPLines()
	//DESCRIPTIONs: 	create virtual channeltrons from Disp. Line, and specified parameters: offset, channeltron length and number of channeltrons.
	//						and store the coordinates in _PLCoord wave. This is to prepare for ImageLineProfile to collect counts in XPS.

	NVAR Offset=root:Package_SLP:DispXPS:RealtimePlot:RT_Offset
	NVAR LPLength=root:Package_SLP:DispXPS:RealtimePlot:RT_LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:RealtimePlot:RT_LPWidth
	NVAR NLines=root:Package_SLP:DispXPS:RealtimePlot:RT_NLines
	
	Wave RealtimePlotW_DispLX=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
	Wave RealtimePlotW_DispLY=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY

	variable x0=RealtimePlotW_DispLX[0]
	variable y0=RealtimePlotW_DispLY[0]
	variable x1=RealtimePlotW_DispLX[1]
	variable y1=RealtimePlotW_DispLY[1]
	
	make /O /N=(NLines,6) root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_PLCoord /WAVE=PLineCoord
	PLineCoord=0
	variable Alpha=atan((y1-y0)/(x1-x0))
	
	setdrawlayer /W=SLP_DispXPS_RT_Panel01#RealTimeImage UserFront
	DrawAction /W=SLP_DispXPS_RT_Panel01#RealTimeImage delete
		
	variable i
	
	For (i=0;i<NLines;i+=1)
		//Create Perpendicular lines
		PLineCoord[i][0]=x0+Offset*cos(Alpha)+i*(x1-x0-2*Offset*cos(Alpha))/(NLines-1)
		PLineCoord[i][1]=y0+Offset*sin(Alpha)+i*(y1-y0-2*Offset*sin(Alpha))/(NLines-1)
		
		PLineCoord[i][2]=PLineCoord[i][0]+LPLength*sin(Alpha)
		PLineCoord[i][3]=PLineCoord[i][1]-LPLength*cos(Alpha)
		
		PLineCoord[i][4]=PLineCoord[i][0]-LPLength*sin(Alpha)
		PLineCoord[i][5]=PLineCoord[i][1]+LPLength*cos(Alpha)
		
		//Draw on the plot
		SetDrawEnv /W=SLP_DispXPS_RT_Panel01#RealTimeImage xcoord=top,ycoord=left,lineFgc=(0,65535,0)
		DrawLine /W=SLP_DispXPS_RT_Panel01#RealTimeImage PLineCoord[i][2],PLineCoord[i][3],PLineCoord[i][4],PLineCoord[i][5]
		//Doupdate	
	Endfor
End

Function SLP_DXPS_Realtime_StateFinished()
	//DESCRIPTIONs: Part of [State machine] for real-time DXPS monitoring. This function terminate the background process and set the button to indicate the finished state to the users.
	//CREATED: 19.03.2021
	SVAR State=root:Package_SLP:DispXPS:RealtimePlot:State
	NVAR IdleTime=root:Package_SLP:DispXPS:RealtimePlot:IdleTime
	SLP_DXPS_BGProcess_Monitor_Stop()
	State="Finished"
	IdleTime=0 //Reset idle time
	Button Button_Monitoring,title="Monitoring finished",win=SLP_DispXPS_RT_Panel01,fcolor=(1,16019,65535)
	TitleBox DescriptionBox title="Press to clear data",win=SLP_DispXPS_RT_Panel01
	SetVariable SetVar_Offset disable=0,win=SLP_DispXPS_RT_Panel01
	SetVariable SetVar_NLines disable=0,win=SLP_DispXPS_RT_Panel01
	SetVariable SetVar_LPLength disable=0,win=SLP_DispXPS_RT_Panel01
	SetVariable SetVar_LPWidth disable=0,win=SLP_DispXPS_RT_Panel01
	Button EditDispL disable=0,win=SLP_DispXPS_RT_Panel01
End

Function SLP_DXPS_Realtime_ToggleKEBE()
	//DESCRIPTION: Toggle between KE (STV) and BE in the plot display
	//CREATED: 20.03.2021
	NVAR BE_Flg=root:Package_SLP:DispXPS:RealtimePlot:BE_Flg
	
	String PlotType
	If (BE_Flg)
		PlotType="BE"
	Else
		PlotType="KE"
	EndIF
	
	SLP_Util_RemoveAllTraces("SLP_DispXPS_RT_Panel01#RealTimePlot")
	
	StrSwitch(PlotType)
		case "KE":
			Appendtograph /W=SLP_DispXPS_RT_Panel01#RealTimePlot root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd
			Label /W=SLP_DispXPS_RT_Panel01#RealTimePlot bottom "STV (eV)"
			Break
		case "BE":
			Appendtograph /W=SLP_DispXPS_RT_Panel01#RealTimePlot root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE
			Label /W=SLP_DispXPS_RT_Panel01#RealTimePlot bottom "BE (eV)"
			SetAxis /W=SLP_DispXPS_RT_Panel01#RealTimePlot /A/R bottom
			Break
	EndSwitch
	
	Label /W=SLP_DispXPS_RT_Panel01#RealTimePlot left "Intensity (a.u.)"
	Modifygraph /W=SLP_DispXPS_RT_Panel01#RealTimePlot minor=1,tick=2,mirror=1
End

Function ButtonProc_DXPS_Realtime(ba) : ButtonControl
	//DESCRIPTIONs: Buttonproc for realtime DXPS monitoring
	//CREATED: 19.03.2021
	STRUCT WMButtonAction &ba
	SVAR MonitoredDirectory=root:Package_SLP:DispXPS:RealtimePlot:MonitoredDirectory
	SVAR State=root:Package_SLP:DispXPS:RealtimePlot:State
	SVAR ImgFileList_old=root:Package_SLP:DispXPS:RealtimePlot:ImgFileList_old
	NVAR IdleTime=root:Package_SLP:DispXPS:RealtimePlot:IdleTime
	NVAR BE_Flg=root:Package_SLP:DispXPS:RealtimePlot:BE_Flg
	Wave CurrentImgW=root:Package_SLP:DispXPS:RealtimePlot:CurrentImgW
	SVAR ScanFolderName=root:Package_SLP:DispXPS:RealtimePlot:ScanFolderName
	SVAR ScanNote=root:Package_SLP:DispXPS:RealtimePlot:ScanNote
	Wave Spectrum_Cmbnd=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd
	Wave Spectrum_CmbndBE=root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE
	
	//[ADDED: 06.04.2021]
	Variable Txt_Found_Flg=0
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				case "Browse":
					GetFileFolderInfo /D/Q
					If (V_Flag!=-1) //If user didn't click cancel
						
						MonitoredDirectory=S_Path
						ScanFolderName=cleanupname(stringfromlist(itemsinlist(MonitoredDirectory,":")-1,MonitoredDirectory,":"),0)
						Txt_Found_Flg=SLP_DXPS_Realtime_Setup(MonitoredDirectory)
						Button Button_Monitoring, disable=0,win=SLP_DispXPS_RT_Panel01 //[ADDED: 06.04.2021]
						Button Button_Monitoring,title="Ready",win=SLP_DispXPS_RT_Panel01,fColor=(0,65535,0)
						State="Ready"
						TitleBox DescriptionBox title="Press to start monitoring",win=SLP_DispXPS_RT_Panel01
						ScanNote="<Enter notes here>"
					EndIf
					Break
				case "Button_Monitoring":
					strswitch(State)	// string switch
						case "Ready":
							Txt_Found_Flg=SLP_DXPS_Realtime_Setup(MonitoredDirectory)
							If (Txt_Found_Flg)
								Button Button_Monitoring,title="Monitoring",win=SLP_DispXPS_RT_Panel01,fColor=(65535,65535,0)
								State="Monitoring"
								TitleBox DescriptionBox title="Press to pause monitoring",win=SLP_DispXPS_RT_Panel01
								SLP_DXPS_BGProcess_Monitor_Start()
								SetVariable SetVar_Offset disable=2,win=SLP_DispXPS_RT_Panel01
								SetVariable SetVar_NLines disable=2,win=SLP_DispXPS_RT_Panel01
								SetVariable SetVar_LPLength disable=2,win=SLP_DispXPS_RT_Panel01
								SetVariable SetVar_LPWidth disable=2,win=SLP_DispXPS_RT_Panel01
								Button EditDispL disable=2,win=SLP_DispXPS_RT_Panel01
							Else
								DoAlert 0,"Check that the selected folder is a DXPS data folder and whether the scan has been started"
							EndIf
							Break
						case "Monitoring":
							Button Button_Monitoring,title="Monitoring paused",win=SLP_DispXPS_RT_Panel01,fColor=(65535,0,0)
							State="Stopped"
							TitleBox DescriptionBox title="Press to resume monitoring",win=SLP_DispXPS_RT_Panel01
							SLP_DXPS_BGProcess_Monitor_Stop()
							IdleTime=0 //Reset idle time
							Break
						case "Stopped":
							Button Button_Monitoring,title="Monitoring",win=SLP_DispXPS_RT_Panel01,fColor=(65535,65535,0)
							State="Monitoring"
							TitleBox DescriptionBox title="Press to pause monitoring",win=SLP_DispXPS_RT_Panel01
							SLP_DXPS_BGProcess_Monitor_Start()
							Break
						case "Finished":
							SLP_DXPS_Realtime_Setup(MonitoredDirectory)
							Button Button_Monitoring,title="Ready",win=SLP_DispXPS_RT_Panel01,fColor=(0,65535,0)
							State="Ready"
							TitleBox DescriptionBox title="Press to start monitoring",win=SLP_DispXPS_RT_Panel01
							ImgFileList_old=""
							Break
					EndSwitch
					Break
				case "EditDispL":
					wave RealtimePlotW_DispLX=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
					wave RealtimePlotW_DispLY=root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY
					Button EditDispL_Save ,win=SLP_DispXPS_RT_Panel01,disable=0
					GraphWaveEdit /W=SLP_DispXPS_RT_Panel01#RealTimeImage /NI RealtimePlotW_DispLY
					
					Break
				case "EditDispL_Save":
					GraphNormal /W=SLP_DispXPS_RT_Panel01#RealTimeImage
					//Need to remove and then add the dispersive line to update the display. this is probably Igor's Bug (Igor works fine if we use GraphWaveEdit in normal window. For subWindow it is strange.)
					RemoveFromGraph /W=SLP_DispXPS_RT_Panel01#RealTimeImage RealtimePlotW_DispLY
					appendtograph /W=SLP_DispXPS_RT_Panel01#RealTimeImage /t=top root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLY vs root:Package_SLP:DispXPS:RealtimePlot:RealtimePlotW_DispLX
					Button EditDispL_Save ,win=SLP_DispXPS_RT_Panel01,disable=2
					SLP_DXPS_Realtime_CreateMultiPLines()
					Break
				case "Export":
					String OrgWFName="" //OrgW
					String ExportWName=""
					IF (BE_Flg)
						OrgWFName="root:Package_SLP:DispXPS:RealtimePlot:Spectrum_CmbndBE"
						ExportWName=ScanFolderName+"_RT_BE"
					Else
						OrgWFName="root:Package_SLP:DispXPS:RealtimePlot:Spectrum_Cmbnd"
						ExportWName=ScanFolderName+"_RT_KE"
					EndIf
					If (!WaveExists($ExportWName))
						Duplicate $(OrgWFName),$(ExportWName) /Wave=ExportedW
					Else
						DoAlert 1,ExportWName+" already exists. Overwrite?"
						If (V_Flag==1)
							Duplicate /O $(OrgWFName),$(ExportWName) /Wave=ExportedW
						Else
							Return 0
						EndIf
					EndIf
					Note ExportedW,ScanNote
					Display ExportedW
					Textbox /A=LT ScanNote
					Modifygraph mirror=1,minor=1,tick=2
					Legend
					If (BE_Flg)
						SetAxis /A/R bottom
					EndIf
					Break
				case "Settings":
					Panel_DXPS_Realtime_Settings() 
					Break
				case "Send2DXPS":
					SLP_DXPS_Realtime_SendToDXPS()
					Break
				case "Compare":
					SLP_DXPS_Realtime_Compare(1)
					Break
				case "RemoveCompare":
					SLP_DXPS_Realtime_Compare(0)
					Break
				case "Done":
					DoWindow /K SLP_DispXPS_RT_Panel01
					Break
			EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DXPS_Realtime_Settings_Done(ba) : ButtonControl
	//CREATED: 23.03.2021
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Dowindow /K SLP_DispXPS_RT_Settings01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DXPS_Realtime(sva) : SetVariableControl
	//DESCRIPTIONs: SetVarProc for realtime DispXPS
	//CREATED: 20.03.2021
	
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			StrSwitch(sva.CtrlName)
				Case "SetVar_Offset":
				Case "SetVar_NLines":
				Case "SetVar_LPLength":
					SLP_DXPS_Realtime_CreateMultiPLines()
					Break
				case "SetVar_DispFactor":
				case "SetVar_CenterPointX":
				case "SetVar_CenterPointY":
				case "SetVar_hv":
				case "SetVar_aWF":
					SLP_DXPS_Realtime_CtronSetScaleMerge()
					Break
			EndSwitch
			
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_DXPS_Realtime(cba) : CheckBoxControl
	//DESCRIPTIONs: CheckProc for realtime DXPS
	//CREATED: 20.03.2021
	
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
				StrSwitch(cba.CtrlName)
					case "CheckBox_BE":
						SLP_DXPS_Realtime_ToggleKEBE()
						Break
					case "CheckBox_PeakID":
						If (checked)						
							ShowInfo /CP=0 /W=SLP_DispXPS_RT_Panel01
							SetActiveSubwindow SLP_DispXPS_RT_Panel01#RealTimePlot
							String TraceName=StringFromList(0,TraceNameList("SLP_DispXPS_RT_Panel01#RealTimePlot",";",1))
							NVAR CursorPos=root:Package_SLP:DispXPS:RealtimePlot:CursorPos
							Cursor /P/W=SLP_DispXPS_RT_Panel01#RealTimePlot A $TraceName CursorPos
							
						Else
							SLP_UTIL_DispPeakAssign("SLP_DispXPS_RT_Panel01#RealTimePlot",0,0,0,0,1)
						EndIf
						Break
				EndSwitch
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_OverSampling(RawDataW_FName,ResultW_FName,DispAreaW_FName,x0,y0,DispX1,DispY1,DispX2,DispY2,DispFactor,STV_Start,STV_Step,STV_NewStep,ProgressText)
//CREATED: 10.03.2021
//DESCRIPTION: From raw DispXPS data volume, the code collect data from each pixel and offset each data by 
//					calulating energy shift in dispersive plane from the (0,0) point (usually set at the center of the dispersive line).
//					Users can specify an energy step smaller than the scan step to make a higher resolution DispXPS spectrum.
//					The results still depend on the setup during the scan (e.g. Entrance/Exit slits, CA, ES used during the scan).
//					The smallest energy step should not be smaller than the pixel size (e.g. 0.030 eV for 4x4 bin, 0.015 eV for 2x2 bin).
	String RawDataW_FName //DXPS raw data voume
	String ResultW_FName //Result wave (x scale = STV)
	String DispAreaW_FName //Dispersive Area wave from ImageAnalyzeParticle. Particle = bright dispersive line - value = 16 (8-bit unsigned byte)
	Variable x0,y0 //Center of the dispersive line where, in theory, KE = 0 eV at STV = 0 V.
	Variable DispX1,DispY1,DispX2,DispY2 //start&end coordinates of dispersive line
	Variable DispFactor //Dispersion factor (same as normal DXPS)
	Variable STV_Start //STV start (from DispXPS scan)
	Variable STV_Step //STP step (from DispXPS scan)
	Variable STV_NewStep //New step (the smallest step should not be below energy size of 1 pixel. That is ~0.030 eV for 4x4 bin data)
	String ProgressText //A message during the oversampling run
	
	Variable STV=0
	Variable OffsetSTV=0
	
	Wave RawDataW=$RawDataW_FName
	Wave DispAreaW=$DispAreaW_FName
	
	Variable STV_End=STV_Start+STV_Step*(dimsize(RawDataW,2))
	Variable New_NPoints=floor(dimsize(RawDataW,2)/STV_NewStep)
	Make /O/N=(New_NPoints) $(ResultW_FName) /Wave=ResultW_Int
	Make /O/N=(New_NPoints) ResultW_Counts
	ResultW_Int=0
	ResultW_Counts=0
	SetScale /P x,STV_Start,STV_NewStep,ResultW_Int
	SetScale /P x,STV_Start,STV_NewStep,ResultW_Counts
		
	Variable i,j,k
	
	//PROGRESS BAR//
	Dowindow /K SLP_ProgressPanel
	NewPanel /N=SLP_ProgressPanel /W=(424,234,802,287)
	SetDrawLayer /W=SLP_ProgressPanel UserBack
	DrawText /W=SLP_ProgressPanel 20,21,ProgressText
	ValDisplay valdisp0,win=SLP_ProgressPanel,mode=3,highColor=(0,65535,0)
	ValDisplay valdisp0,win=SLP_ProgressPanel,pos={18.00,24.00},size={342.00,18.00},limits={0,100,0},barmisc={0,0}
	ValDisplay valdisp0,win=SLP_ProgressPanel,value= _NUM:0
	DoUpdate /W=SLP_ProgressPanel /E=1	// mark this as our progress window
	//PROGRESS BAR//
	
	Variable DataPoint=0
	
	For (k=0;k<dimsize(RawDataW,2);k+=1)
		STV=STV_Start+k*STV_Step
		//PROGRESS BAR//
		ValDisplay valdisp0,win=SLP_ProgressPanel,value= _NUM:(k/dimsize(RawDataW,2)*100)
		//PROGRESS BAR//
		For (i=0;i<dimsize(DispAreaW,0);i+=1)
			For (j=0;j<dimsize(DispAreaW,1);j+=1)
				If (DispAreaW[i][j]==16)
					OffsetSTV=STV+SLP_DXPS_CalculateEOffset(i,j,x0,y0,DispX1,DispY1,DispX2,DispY2,DispFactor)
					If ((OffsetSTV>=STV_Start)	 && (OffsetSTV<=STV_End))	
						DataPoint=x2pnt(ResultW_Int,OffsetSTV)
						If (DataPoint>=0&&DataPoint<New_NPoints)
							ResultW_Int[DataPoint]+=RawDataW[i][j][k]
							ResultW_Counts[DataPoint]+=1
						EndIf
					EndIf
				EndIf
			EndFor
		EndFor
	EndFor
	
	ResultW_Int/=ResultW_Counts
	Killwaves ResultW_Counts
	
	//PROGRESS BAR//
	KillWindow SLP_ProgressPanel
	//PROGRESS BAR//
End

Function SLP_DXPS_CalculateEOffset(x,y,x0,y0,DispX1,DispY1,DispX2,DispY2,DispFactor)
	//CREATED: 08.03.2021
	//DESCRIPTIONs: calculate energy offset using dot product of Dispersive line vector and pixel position (x,y)-(x0,y0) vector.
	
	Variable x,y,x0,y0,DispX1,DispY1,DispX2,DispY2,DispFactor
	
	Variable E_Offset=0
	
	E_Offset=((x-x0)*(DispX1-DispX2)+(y-y0)*(DispY1-DispY2))/(sqrt((DispX1-DispX2)^2+(DispY1-DispY2)^2))*DispFactor

	Return E_Offset
End

Function SLP_Util_Make2DWave(xStart,xEnd,xStep,OneDWaveList,ResultW_Name)
	variable xStart,xEnd,xStep
	string OneDWaveList,ResultW_Name
	
	variable N_Step=floor(abs((xStart-xEnd)/xStep))+1
	variable N_Wave=itemsinlist(OneDWaveList,",")
	
	make /O/N=(N_Step,N_Wave) $ResultW_Name /Wave=ResultW
	
	variable i,j
	
	String OneDWaveName
	Variable xPos=0
	
	For (i=0;i<N_Wave;i+=1)
		OneDWaveName=stringfromlist(i,OneDWaveList,",")
		Wave OneDWave=$OneDWaveName
		xPos=xStart
		If (xStep>0)
			For (j=0;xPos<xEnd;j+=1)
				ResultW[j][i]=OneDWave(xPos)
				xPos=(xStart+j*xStep)
			EndFor
		ElseIf (xStep<0)
			For (j=0;xPos>xEnd;j+=1)
				ResultW[j][i]=OneDWave(xPos)
				xPos=(xStart+j*xStep)
			EndFor
		EndIf
	EndFor
	SetScale /P x,xStart,xStep,ResultW
End

Function SLP_DXPSExp_FormatGraph()
	Modifygraph mirror=1,minor=1,tick=2
	Legend
End

Function SLP_DXPS_Export2D()
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	Variable N_Scans=dimsize(SLP_DXPS_ScanListW,0)
	
	String CmbndW_FName=""
	String WaveFName_List=""
	String WaveFName=""
	String NrmWaveFName=""
	Variable NrmCnst=1
	
	Variable Energy_min=-1000000
	Variable Energy_max=1000000
	Variable Energy_step=1
	Variable Norm_Energy=0
	String Exprted2DW_Name="Exported_2DWave"
	
	Variable i=0
	
	//Auto-detect the parameters (from wave x-scale)
	For (i=0;i<N_Scans;i+=1)
		If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49)
			WaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_CmbndBE"
			Wave CmbndW=$WaveFName
			If (Dimoffset(CmbndW,0)<Energy_max)
				Energy_max=Dimoffset(CmbndW,0)
			EndIf
			If (Dimoffset(CmbndW,0)+DimDelta(CmbndW,0)*(DimSize(CmbndW,0)-1)>Energy_min)
				Energy_min=Dimoffset(CmbndW,0)+DimDelta(CmbndW,0)*(DimSize(CmbndW,0)-1)
			EndIf
		EndIf
	EndFor
	Energy_step=abs(DimDelta(CmbndW,0))
	Norm_Energy=Energy_min+1
	
	Prompt Energy_max,"Maximum energy"
	Prompt Energy_min,"Minimum energy"
	Prompt Energy_Step,"Energy step"
	Prompt Norm_Energy,"Energy for normalization"
	Prompt Exprted2DW_Name, "Exported 2D wave name"
	DoPrompt "Enter parameters",Energy_Max,Energy_Min,Energy_Step,Norm_Energy,Exprted2DW_Name
	
	For (i=0;i<N_Scans;i+=1)
		If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49)
			WaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_CmbndBE"
			NrmWaveFName=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_CmbndBE_nrm"
			
			If (Exists(WaveFName))
				Duplicate /O $WaveFName,$NrmWaveFName /Wave=NrmWave
				NrmCnst=NrmWave(Norm_Energy)
				NrmWave/=NrmCnst
				WaveFName_List+=SLP_DXPS_ScanListW[i][1]+SLP_DXPS_ScanListW[i][0]+"_CmbndBE_nrm,"
			EndIf
			
		EndIf
	EndFor
	
	SLP_Util_Make2DWave(Energy_min,Energy_max,Energy_Step,WaveFName_List,Exprted2DW_Name)
	
	NewImage $Exprted2DW_Name
	ModifyGraph height=100 
	ModifyGraph height=0 //Back to resizable
	String ImageName=StringFromlist(0,ImageNameList("",";"))
	ModifyImage $ImageName ctab={*,*,Rainbow,0}
	Setaxis /A/R top

End

Function SetVarProc_DXPS_FindDispLine(sva) : SetVariableControl
	//MODIFIED: 20210405 - Moved "string SelScan=SLP_DXPS_ScanListW[SelRow][0]" inside StrSwitch
	STRUCT WMSetVariableAction &sva
	
	NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	NVAR Offset=root:Package_SLP:DispXPS:Offset
	NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR NLines=root:Package_SLP:DispXPS:NLines

	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	variable FindDispLine_Err=0

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			//String sval = sva.sval
			string SelScan=SLP_DXPS_ScanListW[SelRow][0]
			SLP_DXPS_SetTh(SelScan,Threshold)
			FindDispLine_Err=SLP_DXPS_FindDispLine(SelScan,MinSize)
			If (FindDispLine_Err==0) //Only continue if [CODE:SLP_DXPS_FindDispLine] works ok
				SLP_DXPS_CreateMultiPLines(SelScan,Offset,LPLength,NLines)
			EndIF
			//Update to the ScanListW
			SLP_DXPS_ScanListW[SelRow][5]=num2str(Threshold)
			SLP_DXPS_ScanListW[SelRow][6]=num2str(MinSize)
			
			//Remove 'Copied disp. line' flag if the user has edited the Th. or MinSize
			SLP_DXPS_ScanListW[SelRow][24]=""							
			SetVariable SetVar_Threshold valueColor=(0,0,0),win=SLP_DispXPS_Panel_01
			SetVariable SetVar_MinSize valueColor=(0,0,0),win=SLP_DispXPS_Panel_01
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DXPS_PLine(sva) : SetVariableControl
	//MODIFIED: 05.04.2021 - Move string SelScan=SLP_DXPS_ScanListW[SelRow][0] inside StrSwitch
	STRUCT WMSetVariableAction &sva
	
	//NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	//NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	NVAR Offset=root:Package_SLP:DispXPS:Offset
	NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	NVAR NLines=root:Package_SLP:DispXPS:NLines
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			string SelScan=SLP_DXPS_ScanListW[SelRow][0]
			//String sval = sva.sval
			SLP_DXPS_CreateMultiPLines(SelScan,Offset,LPLength,NLines)
			//Update to the ScanListW
			SLP_DXPS_ScanListW[SelRow][7]=num2str(Offset)
			SLP_DXPS_ScanListW[SelRow][8]=num2str(LPLength)
			SLP_DXPS_ScanListW[SelRow][10]=num2str(NLines)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DXPS_LPWidth(sva) : SetVariableControl
	//MODIFIED: 05.04.2021 - moved string SelScan=SLP_DXPS_ScanListW[SelRow][0] inside StrSwitch
	STRUCT WMSetVariableAction &sva
	
	//NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	//NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	//NVAR Offset=root:Package_SLP:DispXPS:Offset
	//NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	//NVAR NLines=root:Package_SLP:DispXPS:NLines
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			string SelScan=SLP_DXPS_ScanListW[SelRow][0]
			//String sval = sva.sval
			SLP_DXPS_CreateSpectra(SelScan,LPWidth)
			SLP_DXPS_MergeSpectra(SelScan,CenterPointX,CenterPointY,DispFactor)
			//Update to the ScanListW
			SLP_DXPS_ScanListW[SelRow][9]=num2str(LPWidth)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DXPS_CreateSpectra(ba) : ButtonControl
	//MODIFIED: 05.04.2021 - Moved string SelScan=SLP_DXPS_ScanListW[SelRow][0] inside StrSwitch
	STRUCT WMButtonAction &ba
	
	//NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	//NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	NVAR Offset=root:Package_SLP:DispXPS:Offset
	NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	NVAR NLines=root:Package_SLP:DispXPS:NLines
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			string SelScan=SLP_DXPS_ScanListW[SelRow][0]
			SLP_DXPS_CreateSpectra(SelScan,LPWidth)
			SLP_DXPS_MergeSpectra(SelScan,CenterPointX,CenterPointY,DispFactor)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DXPS_Correct1stInt(ba) : ButtonControl
	//MODIFIED: 05.04.2021 - Moved string SelScan=SLP_DXPS_ScanListW[SelRow][0] inside StrSwitch
	STRUCT WMButtonAction &ba
	
	//NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	//NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	NVAR Offset=root:Package_SLP:DispXPS:Offset
	NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	NVAR NLines=root:Package_SLP:DispXPS:NLines
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
			Wave ImgVolW=$ImgVolW_FName 
			
			string SelScan=SLP_DXPS_ScanListW[SelRow][0]
			//Warn the user
			DoAlert 1,"The 1st image frame will be overwritten with the second frame. Continue?"
			If (V_Flag==1) //If the user clicks 'Yes'
				//Copy the second frame and overwrite it to the 1st frame (which has unusually high intensity sometimes)
				ImgVolW[][][0]=ImgVolW[p][q][1]
				
				SLP_DXPS_CreateSpectra(SelScan,LPWidth)
				SLP_DXPS_MergeSpectra(SelScan,CenterPointX,CenterPointY,DispFactor)
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DXPS_EnCorrection(sva) : SetVariableControl
	//MODIFIED: 05.04.2021 - Moved string SelScan=SLP_DXPS_ScanListW[SelRow][0] inside StrSwicth
	STRUCT WMSetVariableAction &sva
	
	//NVAR Threshold=root:Package_SLP:DispXPS:Threshold
	//NVAR MinSize=root:Package_SLP:DispXPS:MinSize
	//NVAR Offset=root:Package_SLP:DispXPS:Offset
	//NVAR LPLength=root:Package_SLP:DispXPS:LPLength
	//NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
	//NVAR NLines=root:Package_SLP:DispXPS:NLines
	NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
	NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
	NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			//String sval = sva.sval
			string SelScan=SLP_DXPS_ScanListW[SelRow][0]
			SLP_DXPS_MergeSpectra(SelScan,CenterPointX,CenterPointY,DispFactor)
			//Update to the ScanListW
			SLP_DXPS_ScanListW[SelRow][11]=num2str(DispFactor)
			SLP_DXPS_ScanListW[SelRow][12]=num2str(CenterPointX)
			SLP_DXPS_ScanListW[SelRow][13]=num2str(CenterPointY)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_SetTh(VolName,Threshold)
	string VolName
	variable Threshold
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string ImgVol_IntgW_FName= ImgVolW_FName+"_Intg"
	string ImgVol_ThW_FName= ImgVolW_FName+"_Th"
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ImgVol_IntgW=$ImgVol_IntgW_FName
	
	
	Duplicate /O ImgVol_IntgW,$ImgVol_ThW_FName /WAVE=ImgVol_ThW
	
	ImageThreshold/Q/O/I/T=(Threshold) ImgVol_ThW
	
	Duplicate /O ImgVol_ThW,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg1
End

Function SLP_DXPS_FindDataRow(VolName)
	String VolName
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	
	Return DataRow
End

Function SLP_DXPS_FindDispLine(VolName,MinSize)
	string VolName
	variable MinSize
	
	variable FindDispLine_Err=0
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string ImgVol_IntgW_FName= ImgVolW_FName+"_Intg"
	string ImgVol_ThW_FName= ImgVolW_FName+"_Th"
	
	Wave ImgVol_IntgW=$ImgVol_IntgW_FName
	Wave ImgVol_ThW=$ImgVol_ThW_FName
	
	//Move to the data folder
	string CurrentFolder=GetDataFolder(1)
	setDataFolder SLP_DXPS_ScanListW[DataRow][1]
	
	ImageAnalyzeParticles /E/W/Q/EBPC/M=3/A=(MinSize)/F stats, ImgVol_ThW
	If (V_NumParticles!=1)
		//DoAlert 0,"Try adjusting Threshold Value or Min. Size"
		Print "Try adjusting Threshold Value or Min. Size"
		FindDispLine_Err=1
	Else
		string W_BoundaryX_FName=SLP_DXPS_ScanListW[DataRow][1]+"W_BoundaryX"
		string W_BoundaryY_FName=SLP_DXPS_ScanListW[DataRow][1]+"W_BoundaryY"
		string BoundX_W_Name=ImgVolW_FName+"_BX"
		string BoundY_W_Name=ImgVolW_FName+"_BY"
		
		duplicate /O $W_BoundaryX_FName,$BoundX_W_Name /WAVE=BX_W
		duplicate /O $W_BoundaryY_FName,$BoundY_W_Name /WAVE=BY_W
		killwaves $W_BoundaryX_FName
		killwaves $W_BoundaryY_FName
		
		//Create DispLine wave with the same number of row as the boundary wave (BY_W)
		//Duplicate /O BY_W,DispLine
		
		//Fit a straight line to the boundary wave
		CurveFit /Q/M=2/W=0 line, BY_W/X=BX_W/D
		
		//Make wave reference for the fit result -> add "Fit_" to the front of the wave name..
		string DispLine_Wave_Name="Fit_"+stringfromlist(itemsinlist(BoundY_W_Name,":")-1,BoundY_W_Name,":")
		string DispLine_XWave_Name=ImgVolW_FName+"_DispLX"
		string DispLine_YWave_Name=ImgVolW_FName+"_DispLY"
		Wave DispLine_Wave=$DispLine_Wave_Name
		
		//Create new X and Y waves from the fit result
		make /O /N=2 $DispLine_XWave_Name /WAVE=DispLine_X_Wave
		make /O /N=2 $DispLine_YWave_Name /WAVE=DispLine_Y_Wave
		DispLine_X_Wave[0]=dimoffset(DispLine_Wave,0)
		DispLine_X_Wave[1]=dimoffset(DispLine_Wave,0)+dimdelta(DispLine_Wave,0)
		DispLine_Y_Wave[0]=DispLine_Wave[0]
		DispLine_Y_Wave[1]=DispLine_Wave[1]
		
		//Update to ScanListW
		SLP_DXPS_ScanListW[DataRow][19]=num2str(DispLine_X_Wave[0]) //x1
		SLP_DXPS_ScanListW[DataRow][20]=num2str(DispLine_Y_Wave[0]) //y1
		SLP_DXPS_ScanListW[DataRow][21]=num2str(DispLine_X_Wave[1]) //x2
		SLP_DXPS_ScanListW[DataRow][22]=num2str(DispLine_Y_Wave[1]) //y2
	
		Duplicate /O ImgVol_IntgW,root:Package_SLP:DispXPS:SLP_DXPS_DummyImg2
		
		//Remove all previous trace
		string TraceList=TraceNameList("SLP_DispXPS_Panel_01#DX_DispLineImg",";",1)
		string TraceName=""
		variable i=0
		For (i=0;i<ItemsInList(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveFromGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg $TraceName
		EndFor
		
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_DispLineImg BY_W vs BX_W
		ModifyGraph /W=SLP_DispXPS_Panel_01#DX_DispLineImg rgb=(0,43690,65535)
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_DispLineImg DispLine_Y_Wave vs DispLine_X_Wave
	EndIf
	
	//Go back to the previous folder
	SetDataFolder CurrentFolder
	
	Return FindDispLine_Err
End





Function SLP_DXPS_Convert4PCA(MapVolW_FName)
	String MapVolW_FName
	
	Wave MapVolW=$MapVolW_FName
	String TableW_FName=MapVolW_FName+"_Tabl"
	String PixelLocW_FName=MapVolW_FName+"_Loc"
	
	variable i=0
	variable j=0
	variable k=0
	variable N_Params=dimsize(MapVolW,2)
	Make /O/N=(0,N_Params) $TableW_FName /Wave=TableW
	Make /O/N=(0,2) $PixelLocW_FName /Wave=PixelLocW
	
	For (j=0;j<dimsize(MapVolW,1);j+=1)
		For (i=0;i<dimsize(MapVolW,0);i+=1)
			If (!Numtype(MapVolW[i][j]))
				//Add 1 row
				redimension /N=(dimsize(TableW,0)+1,dimsize(TableW,1)) TableW
				redimension /N=(dimsize(PixelLocW,0)+1,dimsize(PixelLocW,1)) PixelLocW
				TableW[k][]=MapVolW[i][j][q]
				PixelLocW[k][0]=i
				PixelLocW[k][1]=j
				k+=1
			EndIf
		EndFor
	EndFor

End

Function SLP_DXPS_MergeSpectra(VolName,x0,y0,DispFactor)
	String VolName
	variable x0,y0,DispFactor
	//(x0,y0) is the coordinate of where zero KE spot (e-gun spot at STV=0V in Disp. Plane mode) is. 
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	string ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string SpectraW_FName=ImgVolW_FName+"_Spectra"
	string PLineCoord_FName=ImgVolW_FName+"_PLCoord"
	string CombinedSpectrumW_FName=ImgVolW_FName+"_Cmbnd"
	string CombinedSpectrumBEW_FName=ImgVolW_FName+"_CmbndBE"
	string DataCountsSpectraW_FName=ImgVolW_FName+"_DataCts"
	string IndvSptrmW_FName=""
		
	//Wave ImgVolW=$ImgVolW_FName
	Wave SpectraW=$SpectraW_FName
	Wave PLineCoord=$PLineCoord_FName
	
	variable N_Spectra=dimsize(SpectraW,1)
	variable N_Steps=dimsize(SpectraW,0)
	
	variable org_offset=str2num(SLP_DXPS_ScanListW[DataRow][14])
	variable org_delta=str2num(SLP_DXPS_ScanListW[DataRow][16])
	
	//variable org_offset=dimoffset(ImgVolW,2)
	//variable org_delta=dimdelta(ImgVolW,2)
	variable new_offset=0
	
	//Move to the data folder
	string CurrentFolder=GetDataFolder(1)
	setDataFolder SLP_DXPS_ScanListW[DataRow][1]
	
	//Create the Combined spectrum wave & data count wave (for averaging)
	Make /O /N=(N_Steps) $CombinedSpectrumW_FName /WAVE=CombinedSpectrmW
	Make /O /N=(N_Steps) $DataCountsSpectraW_FName /WAVE=DataCountsSpectrmW
	SetScale /P x,org_offset,org_delta,CombinedSpectrmW
	SetScale /P x,org_offset,org_delta,DataCountsSpectrmW
	CombinedSpectrmW=0
	DataCountsSpectrmW=0
	
	variable i=0
	variable j=0
	variable x1=0
	variable y1=0
	variable x2=0
	variable y2=0
	variable d=0
	
	string Indv_SpectrumW_FName=""
	variable STV_st=str2num(SLP_DXPS_ScanListW[DataRow][14])
	variable STV_step=str2num(SLP_DXPS_ScanListW[DataRow][16])
	
	variable Grad_Offset=30000
	variable Cmbnd_Spctrm_pos=0
	variable Shftd_IndvSptrm_MinX
	variable Shftd_IndvSptrm_MaxX
	
	string TraceList1=TraceNameList("SLP_DispXPS_Panel_01#DX_ShiftedSpectra",";",1) 
	string TraceList2=TraceNameList("SLP_DispXPS_Panel_01#DX_MergedSpectra",";",1)
	//List of previously showntraces to be removed at the end
	
	For (i=0;i<N_Spectra;i+=1)
		Indv_SpectrumW_FName=SpectraW_FName+num2str(i)
		duplicate /O /r=[][i] SpectraW,$Indv_SpectrumW_FName /WAVE=Indv_SpectrumW
		redimension /N=-1 Indv_SpectrumW //Change from 2D (column wave) to normal 1D (row wave)
		
		//Prepare variables for dE calculation
		x1=PLineCoord[i][2]
		y1=PLineCoord[i][3]
		x2=PLineCoord[i][4]
		y2=PLineCoord[i][5]
		//Find perpendicular distance from (x0,y0) [CODE: SLP_CDL_FindDvector]
		d=SLP_CDL_FindDvector(x0,y0,x1,y1,x2,y2)
		new_Offset=Org_Offset+DispFactor*d
		//Shift each spectrum 
		Setscale /P x,new_Offset,org_delta,Indv_SpectrumW
		//Plotting
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_ShiftedSpectra Indv_SpectrumW
		
		Shftd_IndvSptrm_MinX=Dimoffset(Indv_SpectrumW,0)
		Shftd_IndvSptrm_MaxX=Dimoffset(Indv_SpectrumW,0)+(DimSize(Indv_SpectrumW,0)-1)*DimDelta(Indv_SpectrumW,0)
		
		For (j=0;j<N_Steps;j+=1)
			Cmbnd_Spctrm_pos=pnt2x(CombinedSpectrmW,j)
			If ((Cmbnd_Spctrm_pos>=Shftd_IndvSptrm_MinX)&&(Cmbnd_Spctrm_pos<=Shftd_IndvSptrm_MaxX))
				CombinedSpectrmW[j]=CombinedSpectrmW[j]+Indv_SpectrumW(Cmbnd_Spctrm_pos)
				DataCountsSpectrmW[j]+=1
			EndIf
		
		EndFor
		//DoUpdate
	EndFor
	
	CombinedSpectrmW/=DataCountsSpectrmW
	
	ModifyGraph/Z /W='SLP_DispXPS_Panel_01'#'DX_ShiftedSpectra' tick=2,mirror=1,minor=1
	ModifyGraph/Z /W='SLP_DispXPS_Panel_01'#'DX_MergedSpectra' tick=2,mirror=1,minor=1
	Label/Z/W='SLP_DispXPS_Panel_01'#'DX_ShiftedSpectra' left "Intensity (a.u.)"
	Label/Z/W='SLP_DispXPS_Panel_01'#'DX_MergedSpectra' left "Intensity (a.u.)"
	Label/Z/W='SLP_DispXPS_Panel_01'#'DX_ShiftedSpectra' bottom "Start voltage (eV)"
	
	Variable BE_Flg=str2num(SLP_DXPS_ScanListW[DataRow][26])
	If (BE_Flg)
		SLP_DXPS_CreateBESpectrum()
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_MergedSpectra $CombinedSpectrumBEW_FName
		Label/Z/W='SLP_DispXPS_Panel_01'#'DX_MergedSpectra' bottom "Binding energy (eV)"
		Setaxis /W='SLP_DispXPS_Panel_01'#'DX_MergedSpectra' /A/R bottom
	Else
		Appendtograph /W=SLP_DispXPS_Panel_01#DX_MergedSpectra CombinedSpectrmW
		Label/Z/W='SLP_DispXPS_Panel_01'#'DX_MergedSpectra' bottom "Start voltage (eV)"
	Endif
	
	//Remove all previous trace
	SLP_Util_RemoveTraces("SLP_DispXPS_Panel_01#DX_ShiftedSpectra",TraceList1)
	SLP_Util_RemoveTraces("SLP_DispXPS_Panel_01#DX_MergedSpectra",TraceList2)
	
	//Set traces' colours
	SLP_Util_MakeRedGradient("SLP_DispXPS_Panel_01#DX_ShiftedSpectra")
	ModifyGraph /W=SLP_DispXPS_Panel_01#DX_MergedSpectra lsize=2,rgb=(1,34817,52428)
	
	//Go back to the previous folder
	SetDataFolder CurrentFolder
End

Function SLP_Util_MakeRedGradient(SLP_GraphName)
	string SLP_GraphName
	
	variable Grad_Offset=30000
	
	string TraceList=""
	string TraceName=""
	variable i=0
	
	TraceList=TraceNameList(SLP_GraphName,";",1)
	variable N_Traces=itemsinlist(TraceList,";")
	
	For (i=0;i<N_Traces;i+=1)
		TraceName=stringFromList(ItemsinList(TraceList)-1,TraceList,";")
		TraceName=stringFromList(i,TraceList)
		ModifyGraph /W=$SLP_GraphName rgb($TraceName)=(Grad_Offset+(65535-Grad_Offset)*(i/N_Traces),20000,20000)
	EndFor
End

Function /S SLP_Util_FindWaveFName(GraphName)
//Find all waveFName in a graph
	String GraphName
	String WaveFName_List=""
	String TraceName_List=TraceNameList(GraphName,";",1)
	//Print TraceName_List
	Variable i=0
	For (i=0;i<itemsinlist(TraceName_List,";");i+=1)		
		WaveFName_List+=GetWavesDataFolder(TraceNameToWaveRef(GraphName,StringFromlist(i, TraceName_List ,";")),2)+";"
	EndFor
	Return WaveFName_List
End

Function SLP_Util_RemoveAllImages(SLP_GraphName)
	String SLP_GraphName
	
	string ImgList=""
	string ImgName=""
	variable i=0
	
	ImgList=ImageNameList(SLP_GraphName,";")
	If (!stringmatch(ImgList,""))
		ImgName=""
		For (i=0;i<ItemsInList(ImgList,";");i+=1)
			ImgName=stringFromList(i,ImgList,";")
			RemoveImage/W=$SLP_GraphName $ImgName
		EndFor
	EndIf
End

Function SLP_Util_RemoveAllTraces(SLP_GraphName)
	String SLP_GraphName
	
	string TraceList=""
	string TraceName=""
	variable i=0
	
	TraceList=TraceNameList(SLP_GraphName,";",1)
	If (!stringmatch(TraceList,""))
		TraceName=""
		For (i=0;i<ItemsInList(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveFromGraph /W=$SLP_GraphName $TraceName
		EndFor
	EndIf
End

Function SLP_Util_RemoveTraces(SLP_GraphName,TraceList)
	String SLP_GraphName
	string TraceList
	
	string TraceName=""
	variable i=0
	
	If (!stringmatch(TraceList,""))
		TraceName=""
		For (i=0;i<ItemsInList(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveFromGraph /W=$SLP_GraphName $TraceName
		EndFor
	EndIf
End

Function SLP_Util_NormalizeMultiWaves(W_FName_List,Nrm_pt)
	//** List items separated by ',' **
	String W_FName_List //List can be made by selecting waves in Data Browser and Ctrl-C
	Variable Nrm_pt //Normalization point
	
	String W_FName=""
	Variable i=0
	Variable NrmVal=0
	Variable N_Waves=itemsinlist(W_FName_List,",")
	
	For (i=0;i<N_Waves;i+=1)
		W_FName=stringfromlist(i,W_FName_List,",")
		Wave DataW=$W_FName
		NrmVal=DataW(Nrm_pt)
		Duplicate /O DataW $W_FName+"_nrm" /Wave=Nrm_DataW
		Nrm_DataW/=NrmVal
	EndFor

End

Function SLP_Util_ShirleyGen(nrmXPSW_FName,E_High,E_Low,Iteration,Display_Flg)
	String nrmXPSW_FName
	Variable E_High
	Variable E_Low
	Variable Iteration
	Variable Display_Flg
	
	Wave nrmXPSW=$nrmXPSW_FName
	Variable N_steps=dimsize(nrmXPSW,0)-1
	String BkWardXPSW_FName=nrmXPSW_FName+"_BkWard"
	String ShirleyBGW_FName=nrmXPSW_FName+"_Shirley"
	String nSBGW_FName=nrmXPSW_FName+"_nSBG"
	
	Variable i=0
	Variable k1=1
	
	If (dimdelta(nrmXPSW,0)<0) //For waves with negative dE
		//Create 'Backward' wave (delta = positive) otherwise the 'integrate' function wouldn't work
		Duplicate /O nrmXPSW $BkWardXPSW_FName /Wave=BkWardXPSW
		BkWardXPSW[]=nrmXPSW[N_steps-p]-nrmXPSW(E_Low) //Remove flate BG (pre-peak should be zero)
		Variable BE_Min=dimoffset(nrmXPSW,0)+dimdelta(nrmXPSW,0)*(dimsize(nrmXPSW,0)-1)
		Variable BE_Step=-1*dimdelta(nrmXPSW,0)
		setscale /P x,BE_Min,BE_Step,BkWardXPSW
		
		//Shirley BG (backwarded version - to be killed later)
		Duplicate /O BkWardXPSW root:Package_SLP:Util:ShirleyBGW_BkWard /Wave=ShirleyBGW_BkWard 
		ShirleyBGW_BkWard=0 //Initialize Shirley BG = 0
		Duplicate /O BkWardXPSW $nSBGW_FName /Wave=nSBGW

		//Iteration to create Shirley BG (use Shirley's algorithm)
		i=0
		k1=1
		For (i=0;i<Iteration;i+=1)	
			nSBGW=BkWardXPSW-ShirleyBGW_BkWard
			integrate /METH=1 nSBGW /D=ShirleyBGW_BkWard
			
			//Scale Shirley BG so that it crosses the DATA WAVE at E_high
			k1=BkWardXPSW(E_High)/ShirleyBGW_BkWard(E_High)
			ShirleyBGW_BkWard*=k1
		EndFor
		
		//Back to using negative deltaE for Shirley BG
		SLP_Util_Reverse_Xaxis("root:Package_SLP:Util:ShirleyBGW_BkWard",ShirleyBGW_FName) 
		//Remove Bkward wave
		Killwaves $BkWardXPSW_FName
		
		Wave ShirleyBGW=$ShirleyBGW_FName
		ShirleyBGW+=nrmXPSW(E_Low) //Add the pre-peak BG to the Shirley BG
		
		Duplicate /O nrmXPSW $nSBGW_FName /Wave=nSBGW //Create the resulting wave
		nSBGW=nrmXPSW-ShirleyBGW
	
	ElseIf (dimdelta(nrmXPSW,0)>0) //For normal waves
		
		//Shirley BG (backwarded version - to be killed later)
		Duplicate /O nrmXPSW $ShirleyBGW_FName /Wave=ShirleyBGW
		ShirleyBGW=0 //Initialize Shirley BG = 0

		Duplicate /O nrmXPSW $nSBGW_FName /Wave=nSBGW
		//nSBGW-=nrmXPSW(E_Low) //Remove flat BG first
		
		//Iteration to create Shirley BG (use Shirley's algorithm)
		i=0
		k1=1
		For (i=0;i<Iteration;i+=1)	
			nSBGW=nrmXPSW-nrmXPSW(E_low)-ShirleyBGW
			integrate /METH=1 nSBGW /D=ShirleyBGW
			//Scale Shirley BG so that it crosses the DATA WAVE at E_high
			k1=(nrmXPSW(E_High)-nrmXPSW(E_Low))/ShirleyBGW(E_High)
			ShirleyBGW*=k1
		EndFor
		
		ShirleyBGW+=nrmXPSW(E_Low) //Add the pre-peak BG to the Shirley BG
		nSBGW=nrmXPSW-ShirleyBGW
	
	EndIf
	
	//Display data
	If (Display_Flg)
		String TraceList=""
		String TraceName=""
		
		Display ShirleyBGW
		ModifyGraph mode=7;DelayUpdate
		ModifyGraph rgb=(65535,49151,49151) , hbFill=2 //Filled
		Modifygraph mirror=1, minor=1, tick=2
		Legend
		//Setaxis /A/R bottom
		
		Appendtograph nrmXPSW //XPS data wave
		Appendtograph nSBGW //Resulting wave (formatted to dashed)
		TraceList=tracenameList("",";",1)
		TraceName=stringfromlist(itemsinlist(TraceList,";")-1,TraceList)
		Modifygraph lstyle($TraceName)=2
	Endif
End

Function SLP_Util_Reverse_Xaxis(dataW_FName,BkwardDataW_FName)
	String dataW_FName
	String BkwardDataW_FName
	
	Wave dataW=$dataW_FName
	
	variable N_datapoints=dimsize(dataW,0)
	
	Duplicate /O $dataW_FName $BkwardDataW_FName /Wave=BkwardDataW
	
	BkwardDataW[]=dataW[N_datapoints-1-p]
	
	Variable X_Min=dimoffset(dataW,0)+dimdelta(dataW,0)*(dimsize(dataW,0)-1)
	Variable X_Step=-1*dimdelta(dataW,0)
	setscale /P x,X_Min,X_Step,BkwardDataW
End


Function ButtonProc_IXPS_CreateScrnMask(ba) : ButtonControl //Automatically find screen and create mask using threshold&particle analysis
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			//Find the current selected row
			
			//clear screen mask drawing
			SetActiveSubwindow SLP_ImgXPS_Panel_01#IX_ImgW
			DrawAction delete
			
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String ScanName=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String ImgIntgW_FName=ImgVolW_FName+"_intg"
			string BoundX_W_FName=ImgVolW_FName+"_BX"
			string BoundY_W_FName=ImgVolW_FName+"_BY"
			
			NVAR Threshold=root:Package_SLP:ImgXPS:Threshold
			
			SLP_IXPS_CreateScreenMask(ScanName,Threshold,1000)
			If (Exists(BoundX_W_FName))
				Wave BX=$BoundX_W_FName
				Wave BY=$BoundY_W_FName
				SLP_Util_RemoveAllTraces("SLP_ImgXPS_Panel_01#IX_ImgW")
				Appendtograph /W=SLP_ImgXPS_Panel_01#IX_ImgW BY vs BX
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function SLP_IXPS_SelectImage(ImgWinName)
	//- Update the check box
	//- Create the histogram and 
	//- Adjust the histogram plot and the intensity sliders
	String ImgWinName
	
	NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
	NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
	
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	//Waves and wave refs.
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
	String UMap1W_FName=ImgVolW_FName+"_UMap1"
	String Corr1W_FName=ImgVolW_FName+"_Corr1"
	String CMap1W_FName=ImgVolW_FName+"_CMap1"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String ImageHistW_FName=ImgVolW_FName+"_Hist"
	String ImgVol_ScrnW_FName=ImgVolW_FName+"_Scrn"
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	Wave ImgVol_ScrnW=$ImgVol_ScrnW_FName
	
	String SelParamName=""
	
	//MOVE THE CHECKBOX
	
	CheckBox CheckBox_SelImg1,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg2,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg3,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg4,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg5,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg6,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImgCorr,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImgCMap,value=0,win=SLP_ImgXPS_Panel_01
	
	strswitch (ImgWinName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
		case "SLP_ImgXPS_Panel_01#IX_RawExt1":
			CheckBox CheckBox_SelImg1,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName=SLP_IXPS_ScanListW[SelRow][22]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt2":
			CheckBox CheckBox_SelImg2,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName=SLP_IXPS_ScanListW[SelRow][23]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt3":
			CheckBox CheckBox_SelImg3,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName=SLP_IXPS_ScanListW[SelRow][24]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt4":
			CheckBox CheckBox_SelImg4,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName=SLP_IXPS_ScanListW[SelRow][25]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt5":
			CheckBox CheckBox_SelImg5,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName=SLP_IXPS_ScanListW[SelRow][26]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt6":
			CheckBox CheckBox_SelImg6,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName=SLP_IXPS_ScanListW[SelRow][27]
			break
		case "SLP_ImgXPS_Panel_01#IX_Correction1":
			CheckBox CheckBox_SelImgCorr,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName="Corr1"
			break
		case "SLP_ImgXPS_Panel_01#IX_ResultMap1":
			CheckBox CheckBox_SelImgCMap,value=1,win=SLP_ImgXPS_Panel_01
			SelParamName="CMap1"
			break
	endswitch
	
	//CREATE HISTOGRAM
	If (Exists(MapVolW_FName)) //Check whether MapVolW has already been extracted
		Wave MapVolW=$MapVolW_FName
		
		Variable zMin
		Variable zMax
		
		Variable HistogramMin
		Variable HistogramMax
		Variable HistogramBin 
		
		Variable SliderLimitMin
		Variable SliderLimitMax
		Variable SliderStep=200 //Default
		
		If (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_Correction1")&&Exists(Corr1W_FName)) //Corr
			Duplicate /O $Corr1W_FName,root:Package_SLP:ImgXPS:LPFImgW /Wave=LPFImgW
			zMin=str2num(SLP_IXPS_ScanListW[SelRow][18])
			zMax=str2num(SLP_IXPS_ScanListW[SelRow][19])
			HistogramMin=str2num(SLP_IXPS_ScanListW[SelRow][50])
			HistogramMax=str2num(SLP_IXPS_ScanListW[SelRow][51])
			HistogramBin=str2num(SLP_IXPS_ScanListW[SelRow][52])
			If (numtype(HistogramMin)==2) //If not yet specified
				HistogramMin=zMin-(zMax-zMin)/4
				HistogramMax=zMax+(zMax-zMin)/4
				HistogramBin=200 //Default //[TODO] to be added in [SETTINGS]
				SLP_IXPS_ScanListW[SelRow][50]=num2str(HistogramMin)
				SLP_IXPS_ScanListW[SelRow][51]=num2str(HistogramMax)
				SLP_IXPS_ScanListW[SelRow][52]=num2str(HistogramBin)
			EndIf
			
		ElseIf (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_ResultMap1")&&Exists(CMap1W_FName)) //CMap
			Duplicate /O $CMap1W_FName,root:Package_SLP:ImgXPS:LPFImgW /Wave=LPFImgW	
			zMin=str2num(SLP_IXPS_ScanListW[SelRow][20])
			zMax=str2num(SLP_IXPS_ScanListW[SelRow][21])
			HistogramMin=str2num(SLP_IXPS_ScanListW[SelRow][53])
			HistogramMax=str2num(SLP_IXPS_ScanListW[SelRow][54])
			HistogramBin=str2num(SLP_IXPS_ScanListW[SelRow][55])
			If (numtype(HistogramMin)==2) //If not yet specified
				HistogramMin=zMin-(zMax-zMin)/4
				HistogramMax=zMax+(zMax-zMin)/4
				HistogramBin=200 //Default //[TODO] to be added in [SETTINGS]
				SLP_IXPS_ScanListW[SelRow][53]=num2str(HistogramMin)
				SLP_IXPS_ScanListW[SelRow][54]=num2str(HistogramMax)
				SLP_IXPS_ScanListW[SelRow][55]=num2str(HistogramBin)
			EndIf
			
		Else //ParamMap
			Variable SelParamRow=-1
			Variable SelParamCol=0
			FindValue /S=(dimsize(FitCoefDisplayW,0)*2) /TEXT=SelParamName/TXOP=4 /Z FitCoefDisplayW
			SelParamCol=floor(V_value/dimsize(FitCoefDisplayW,0))
			SelParamRow=V_value-SelParamCol*dimsize(FitCoefDisplayW,0)
			Duplicate /O /R=[][][SelParamRow] MapVolW,root:Package_SLP:ImgXPS:LPFImgW /Wave=LPFImgW
			Redimension /N=(dimsize(LPFImgW,0),dimsize(LPFImgW,1),0) LPFImgW //Reduce dimension from 3D to 2D
			
			zMin=str2num(FitCoefDisplayW[SelParamRow][10])
			zMax=str2num(FitCoefDisplayW[SelParamRow][11])
			
			HistogramMin=str2num(FitCoefDisplayW[SelParamRow][12])
			HistogramMax=str2num(FitCoefDisplayW[SelParamRow][13])
			HistogramBin=str2num(FitCoefDisplayW[SelParamRow][14])
			
			If (numtype(HistogramMin)==2) //If not yet specified
				HistogramMin=zMin-(zMax-zMin)/4
				HistogramMax=zMax+(zMax-zMin)/4
				HistogramBin=200 //Default //[TODO] to be added in [SETTINGS]
				FitCoefDisplayW[SelParamRow][12]=num2str(HistogramMin)
				FitCoefDisplayW[SelParamRow][13]=num2str(HistogramMax)
				FitCoefDisplayW[SelParamRow][14]=num2str(HistogramBin)
			EndIf
			
		EndIf
		
		//CREATE HISTOGRAM
		//Clip the very high and low values (likely generated from fit erros)
		MatrixOp LPFImgW_tmp=clip(LPFImgW,HistogramMin,HistogramMax)
		LPFImgW=LPFImgW_tmp
		Killwaves LPFImgW_tmp
		
		//Remove noise before creating histogram
		MatrixFilter /P=1/N=3 median LPFImgW //[TODO] N=3 to be added in [SETTINGS]
		MatrixFilter /P=2/N=5 avg LPFImgW //[TODO] N=5 to be added in [SETTINGS]
		
		ImageHistogram LPFImgW
		Wave W_ImageHist
		duplicate /O W_ImageHist,$ImageHistW_FName /Wave=ImageHistW
		WaveStats /Q LPFImgW
		
		//ADJUST SLIDER
		SliderLimitMin=HistogramMin
		SliderLimitMax=HistogramMax
		SliderStep=(HistogramMax-HistogramMin)/200
		
		ColorMin=zMin
		ColorMax=zMax
		
		Slider Slider_ImgVolMinInt,limits={SliderLimitMin,SliderLimitMax,SliderStep},value=ColorMin,win=SLP_ImgXPS_Panel_01
		Slider Slider_ImgVolMaxInt,limits={SliderLimitMin,SliderLimitMax,SliderStep},value=ColorMax,win=SLP_ImgXPS_Panel_01
			
		If (Exists(ImageHistW_FName))
			SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Histogram",ImageHistW_FName,0)
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mirror=1,minor=1,tick(left)=0,tick(bottom)=2
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram  margin(bottom)=20,margin(left)=3,margin(top)=3,margin(right)=3
			ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mode=5,hbFill=2,rgb=(1,34817,52428)
			SetAxis /W=SLP_ImgXPS_Panel_01#IX_Histogram bottom SliderLimitMin,SliderLimitMax
			TextBox /W=SLP_ImgXPS_Panel_01#IX_Histogram /C/N=ParamName SelParamName
		EndIf
		 
		Killwaves LPFImgW
		Killwaves W_ImageHist
	
	EndIf
	
End

Function SLP_IXPS_ExportHistogram()
	//- Update the check box
	//- Create the histogram and 
	//- Adjust the histogram plot and the intensity sliders
	
//	NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
//	NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
//	
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	//Waves and wave refs.
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String ImgVolW_Name=SLP_IXPS_ScanListW[SelRow][0]
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+ImgVolW_Name
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	
	String ImageHistW_Name=ImgVolW_Name+"_Hist"
	String ImageHistW_FName=ImgVolW_FName+"_Hist"
	String ImgWinName=SLP_IXPS_ScanListW[SelRow][47]
	
	
	String SelParamName=""
	Variable i=0
	String UMapParamName=""
	String UMapAxisLabel=""
	
	
	strswitch (ImgWinName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
		case "SLP_ImgXPS_Panel_01#IX_RawExt1":
			SelParamName=SLP_IXPS_ScanListW[SelRow][22]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt2":
			SelParamName=SLP_IXPS_ScanListW[SelRow][23]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt3":
			SelParamName=SLP_IXPS_ScanListW[SelRow][24]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt4":
			SelParamName=SLP_IXPS_ScanListW[SelRow][25]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt5":
			SelParamName=SLP_IXPS_ScanListW[SelRow][26]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt6":
			SelParamName=SLP_IXPS_ScanListW[SelRow][27]
			break
		case "SLP_ImgXPS_Panel_01#IX_Correction1":
			For (i=0;i<dimsize(FitCoefDisplaySelW,0);i+=1)
				If (FitCoefDisplaySelW[i][9]==48)
					UMapParamName=FitCoefDisplayW[i][2]+"_Corr"
					UMapAxisLabel=FitCoefDisplayW[i][2]+" (correction)"
				Endif	
			EndFor
			break
		case "SLP_ImgXPS_Panel_01#IX_ResultMap1":
			For (i=0;i<dimsize(FitCoefDisplaySelW,0);i+=1)
				If (FitCoefDisplaySelW[i][9]==48)
					UMapParamName=FitCoefDisplayW[i][2]+"_cMap"
					UMapAxisLabel=FitCoefDisplayW[i][2]+" (after correction)"
				Endif	
			EndFor
			break
	endswitch
	
	UMapAxisLabel+=SelParamName
	String ExportW_Name=ImageHistW_Name+"_"+SelParamName+UMapParamName
	String ExportW_Note="Histogram wave from SLPA Imging XPS extraction\r"+ImgVolW_Name+": "+UMapAxisLabel+"\rExported on: "+date()+" "+time()
	
	If (checkName(ExportW_Name,1)) //If name is not legal or unique
		ExportW_Name=cleanupname(uniqueName(ExportW_Name,1,0),0)//Make name unique and legal
	EndIf

	Duplicate $ImageHistW_FName,$ExportW_Name /Wave=ImageHistW
	Display ImageHistW
	Note ImageHistW,ExportW_Note

	Modifygraph mirror=1,minor=1,tick(left)=3,tick(bottom)=2
	ModifyGraph mode=5,hbFill=2,rgb=(1,34817,52428)
	Label Bottom UMapAxisLabel
	Label Left "Count"
	Legend
	Textbox /F=0/B=1/A=RC ExportW_Note
End

Function CheckProc_IXPS(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			strswitch(cba.CtrlName)	// string switch
				case "Check_CMapCsr":		// execute if case matches expression
					ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
					variable SelRow=V_Value
					Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW	
					ControlInfo /W=SLP_ImgXPS_Panel_01 Check_CMapCsr
					Variable CMapCsrFlg=V_Value
					SLP_IXPS_ScanListW[SelRow][56]=num2str(CMapCsrFlg)
					SLP_IXPS_DisplayCMapCsr(CMapCsrFlg)
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_DisplayCMapCsr(CMapCsrFlg)
	Variable CMapCsrFlg
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW	
	String ImgVol_Name=SLP_IXPS_ScanListW[SelRow][0]
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+ImgVol_Name
	String CMap1W_FName=ImgVol_Name+"_CMap1"
	String CMap1W_Name=ImgVol_Name+"_CMap1"
	If (CMapCsrFlg)
		variable CMapCsr_p=str2num(SLP_IXPS_ScanListW[SelRow][57])
		variable CMapCsr_q=str2num(SLP_IXPS_ScanListW[SelRow][58])
		Variable CMapCsr_x=pnt2x($CMap1W_FName,CMapCsr_p)
		Variable CMapCsr_y=DimOffset($CMap1W_FName, 1) + CMapCsr_q *DimDelta($CMap1W_FName,1)
		Cursor /W=SLP_ImgXPS_Panel_01#IX_ResultMap1/I A $CMap1W_Name CMapCsr_x,CMapCsr_y
	Else 
		Cursor /K/W=SLP_ImgXPS_Panel_01#IX_ResultMap1 A
	EndIf
End



Function ButtonProc_IXPS_DelDataSet(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			//Change dataset selection if the current one is going to be delected
			if (SLP_IXPS_ScanListDisplaySelW[SelRow][0]==48)
				//Find the first non-selected DataSet from the top	
				variable i=0
				For (i=0;i<dimsize(SLP_IXPS_ScanListDisplaySelW,0)&&SLP_IXPS_ScanListDisplaySelW[i][0]==48;i+=1)
					DoUpdate
				Endfor
				//i is now the index of the first non-selected DataSet
			EndIf
			
			String SelDataName=""
			If (i<dimsize(SLP_IXPS_ScanListDisplaySelW,0)) //Not all data were selected
				//ListBox List_ScansList SelRow=i
				SelDataName=SLP_IXPS_ScanListW[i][0]
			Endif
			SLP_IXPS_ClearDisplay()
			SLP_IXPS_DelScanBatch()
			//If all data have been removed - initialize the panel
			If (dimsize(SLP_IXPS_ScanListDisplaySelW,0)==0)
				SLP_IXPS_init()
			Else
				SLP_IXPS_DisplaySelectedData(SelDataName)
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_DelScanBatch()
	
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	
	variable i=0
	String VolName=""
	variable DelError=0
	String ErrorTxt=""
	String WarnTxt=""
	variable WSIze=dimsize(SLP_IXPS_ScanListDisplaySelW,0)
	
	For (i=0;i<dimsize(SLP_IXPS_ScanListDisplaySelW,0);i+=1)
		If (SLP_IXPS_ScanListDisplaySelW[i][0]==48||SLP_IXPS_ScanListDisplaySelW[i][0]==49)
			VolName=SLP_IXPS_ScanListW[i][0]
			WarnTxt="Delete scan: "+VolName+" ?"
			DoAlert 1,WarnTxt
			
			If (V_flag==1) //If user clicks 'Yes'			
				DelError=SLP_IXPS_DelScan(VolName)
				i-=1 //Go back one row
			EndIf
			
			If (DelError)
				ErrorTxt="Error deleting scan: "+VolName+"\r wave(s) in the dataset are being used somewhere in the current project"
				DoAlert 0,ErrorTxt
			Endif
			DoUpdate
		Endif
	EndFor
End





Function SLP_IXPS_AutoColor()
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+VolName
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	String ImgWinName=SLP_IXPS_ScanListW[SelRow][47]
	
	
	Variable zMin=SLP_Util_AutoColor(ImgWinName,"Min")
	Variable zMax=SLP_Util_AutoColor(ImgWinName,"Max")
	
	//UPDATE to ScanListW or CoefDispW
	String SelParamName=""
	strswitch (ImgWinName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
		case "SLP_ImgXPS_Panel_01#IX_RawExt1":
			SelParamName=SLP_IXPS_ScanListW[SelRow][22]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt2":
			SelParamName=SLP_IXPS_ScanListW[SelRow][23]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt3":
			SelParamName=SLP_IXPS_ScanListW[SelRow][24]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt4":
			SelParamName=SLP_IXPS_ScanListW[SelRow][25]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt5":
			SelParamName=SLP_IXPS_ScanListW[SelRow][26]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt6":
			SelParamName=SLP_IXPS_ScanListW[SelRow][27]
			break
	endswitch
	
	If (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_Correction1")) //Corr
		SLP_IXPS_ScanListW[SelRow][18]=num2str(zMin)
		SLP_IXPS_ScanListW[SelRow][19]=num2str(zMax)
	ElseIf (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_ResultMap1")) //CMap
		SLP_IXPS_ScanListW[SelRow][20]=num2str(zMin)
		SLP_IXPS_ScanListW[SelRow][21]=num2str(zMax)
	Else //ParamMap
		Variable SelParamRow=-1
		Variable SelParamCol=0
		FindValue /S=(dimsize(FitCoefDisplayW,0)*2) /TEXT=SelParamName/TXOP=4 /Z FitCoefDisplayW
		SelParamCol=floor(V_value/dimsize(FitCoefDisplayW,0))
		SelParamRow=V_value-SelParamCol*dimsize(FitCoefDisplayW,0)
		FitCoefDisplayW[SelParamRow][10]=num2str(zMin)
		FitCoefDisplayW[SelParamRow][11]=num2str(zMax)
	EndIf
	
	SLP_IXPS_DisplaySelectedData(VolName)
End

Function SLP_IXPS_AdjustHistogram()
	//- Update the check box
	//- Create the histogram and 
	//- Adjust the histogram plot and the intensity sliders
	
	NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
	NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
	
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	//Waves and wave refs.
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
	String UMap1W_FName=ImgVolW_FName+"_UMap1"
	String Corr1W_FName=ImgVolW_FName+"_Corr1"
	String CMap1W_FName=ImgVolW_FName+"_CMap1"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String ImageHistW_FName=ImgVolW_FName+"_Hist"
	String ImgVol_ScrnW_FName=ImgVolW_FName+"_Scrn"
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	Wave ImgVol_ScrnW=$ImgVol_ScrnW_FName
	
	String ImgWinName=SLP_IXPS_ScanListW[SelRow][47]
	
	//String SelParamName=""
	
	//MOVE THE CHECKBOX
	
//	CheckBox CheckBox_SelImg1,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImg2,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImg3,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImg4,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImg5,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImg6,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImgCorr,value=0,win=SLP_ImgXPS_Panel_01
//	CheckBox CheckBox_SelImgCMap,value=0,win=SLP_ImgXPS_Panel_01
//	
	String SelParamName=""
	strswitch (ImgWinName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
		case "SLP_ImgXPS_Panel_01#IX_RawExt1":
			SelParamName=SLP_IXPS_ScanListW[SelRow][22]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt2":
			SelParamName=SLP_IXPS_ScanListW[SelRow][23]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt3":
			SelParamName=SLP_IXPS_ScanListW[SelRow][24]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt4":
			SelParamName=SLP_IXPS_ScanListW[SelRow][25]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt5":
			SelParamName=SLP_IXPS_ScanListW[SelRow][26]
			break
		case "SLP_ImgXPS_Panel_01#IX_RawExt6":
			SelParamName=SLP_IXPS_ScanListW[SelRow][27]
			break
	endswitch
	
	//CREATE HISTOGRAM
	If (Exists(MapVolW_FName)) //Check whether MapVolW has already been extracted
		Wave MapVolW=$MapVolW_FName
		
		Variable zMin
		Variable zMax
		
		Variable HistogramMin
		Variable HistogramMax
		Variable HistogramBin 
		
		Variable SliderLimitMin
		Variable SliderLimitMax
		Variable SliderStep=200 //Default
		
		If (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_Correction1")&&Exists(Corr1W_FName)) //Corr
			Duplicate /O $Corr1W_FName,root:Package_SLP:ImgXPS:LPFImgW /Wave=LPFImgW
			HistogramMin=str2num(SLP_IXPS_ScanListW[SelRow][50])
			HistogramMax=str2num(SLP_IXPS_ScanListW[SelRow][51])
			HistogramBin=str2num(SLP_IXPS_ScanListW[SelRow][52])
		ElseIf (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_ResultMap1")&&Exists(CMap1W_FName)) //CMap
			Duplicate /O $CMap1W_FName,root:Package_SLP:ImgXPS:LPFImgW /Wave=LPFImgW	
			HistogramMin=str2num(SLP_IXPS_ScanListW[SelRow][53])
			HistogramMax=str2num(SLP_IXPS_ScanListW[SelRow][54])
			HistogramBin=str2num(SLP_IXPS_ScanListW[SelRow][55])
		Else //ParamMap
			Variable SelParamRow=-1
			Variable SelParamCol=0
			FindValue /S=(dimsize(FitCoefDisplayW,0)*2) /TEXT=SelParamName/TXOP=4 /Z FitCoefDisplayW
			SelParamCol=floor(V_value/dimsize(FitCoefDisplayW,0))
			SelParamRow=V_value-SelParamCol*dimsize(FitCoefDisplayW,0)
			Duplicate /O /R=[][][SelParamRow] MapVolW,root:Package_SLP:ImgXPS:LPFImgW /Wave=LPFImgW
			Redimension /N=(dimsize(LPFImgW,0),dimsize(LPFImgW,1),0) LPFImgW //Reduce dimension from 3D to 2D
			HistogramMin=str2num(FitCoefDisplayW[SelParamRow][12])
			HistogramMax=str2num(FitCoefDisplayW[SelParamRow][13])
			HistogramBin=str2num(FitCoefDisplayW[SelParamRow][14])
		EndIf
		
		Prompt HistogramMin,"Minimum z"
		Prompt HistogramMax,"Maximum z"
		Prompt HistogramBin,"Histogram Bin"
		DoPrompt "Enter new setting for histogram",HistogramMin,HistogramMax,HistogramBin
		
		If (V_Flag==0) //If user clicks Continue
			If (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_Correction1")&&Exists(Corr1W_FName)) //Corr
				SLP_IXPS_ScanListW[SelRow][50]=num2str(HistogramMin)
				SLP_IXPS_ScanListW[SelRow][51]=num2str(HistogramMax)
				SLP_IXPS_ScanListW[SelRow][52]=num2str(HistogramBin)
			ElseIf (StringMatch(ImgWinName,"SLP_ImgXPS_Panel_01#IX_ResultMap1")&&Exists(CMap1W_FName)) //CMap
				SLP_IXPS_ScanListW[SelRow][53]=num2str(HistogramMin)
				SLP_IXPS_ScanListW[SelRow][54]=num2str(HistogramMax)
				SLP_IXPS_ScanListW[SelRow][55]=num2str(HistogramBin)
			Else //ParamMap
				FitCoefDisplayW[SelParamRow][12]=num2str(HistogramMin)
				FitCoefDisplayW[SelParamRow][13]=num2str(HistogramMax)
				FitCoefDisplayW[SelParamRow][14]=num2str(HistogramBin)
			EndIf
			
			//CREATE HISTOGRAM
			//Clip the very high and low values (likely generated from fit erros)
			MatrixOp LPFImgW_tmp=clip(LPFImgW,HistogramMin,HistogramMax)
			LPFImgW=LPFImgW_tmp
			Killwaves LPFImgW_tmp
			
			//Remove noise before creating histogram
			MatrixFilter /P=1/N=3 median LPFImgW //[TODO] N=3 to be added in [SETTINGS]
			MatrixFilter /P=2/N=5 avg LPFImgW //[TODO] N=5 to be added in [SETTINGS]
			
			Variable HistogramBinWidth=(HistogramMax-HistogramMin)/HistogramBin
			Histogram /B={HistogramMin,HistogramBinWidth,HistogramBin} LPFImgW,$ImageHistW_FName
			
			//ADJUST SLIDER
			SliderLimitMin=HistogramMin
			SliderLimitMax=HistogramMax
			SliderStep=(HistogramMax-HistogramMin)/200
			Slider Slider_ImgVolMinInt,win=SLP_ImgXPS_Panel_01,limits={SliderLimitMin,SliderLimitMax,SliderStep}
			Slider Slider_ImgVolMaxInt,win=SLP_ImgXPS_Panel_01,limits={SliderLimitMin,SliderLimitMax,SliderStep}
			
			//ADJUST THE PLOT
			SetAxis /W=SLP_ImgXPS_Panel_01#IX_Histogram bottom SliderLimitMin,SliderLimitMax
			
		EndIf
			 
		Killwaves LPFImgW
		//Killwaves W_ImageHist
	
	EndIf
	
End

Function PopMenuProc_IXPS_FitSel(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			
			//Initialize the fitting
			SLP_IXPS_ScanListW[SelRow][17]=popStr
			SLP_IXPS_FitInit2(VolName)
			SLP_IXPS_MakeGuessCurve2(VolName)
			
			//Enable or disable the background selection
			If (Stringmatch(popStr,"LEEM cut-off")||Stringmatch(popStr,"Secondary yield cut-off"))
				PopupMenu popup_BG_Type disable=2
				SetVariable setvar_N_Peaks disable=2,win=SLP_ImgXPS_Panel_01
			Else
				PopupMenu popup_BG_Type disable=0
				SetVariable setvar_N_Peaks disable=0,win=SLP_ImgXPS_Panel_01
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_AutoContrast(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String ScanName=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			Variable SelFrame=str2num(SLP_IXPS_ScanListW[SelRow][5])
			Duplicate /O/R=[][][SelFrame] $ImgVolW_FName,SLP_IXPS_SelFrame
			WaveStats /Q SLP_IXPS_SelFrame
			variable IntMin=V_avg-V_sdev*2
			variable IntMax=V_avg+V_sdev*2
			SLP_IXPS_ScanListW[SelRow][6]=num2str(IntMin)
			SLP_IXPS_ScanListW[SelRow][7]=num2str(IntMax)
			SLP_IXPS_DisplaySelectedData(ScanName)
			
			Killwaves SLP_IXPS_SelFrame
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_IXPS_FitInit2(VolName)
	String VolName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	String GLAParamGssW_FName=ImgVolW_FName+"_GLAParamGss"
	
	Wave ZProfW=$ZProfW_FName
	Wave GLAParamGssW=$GLAParamGssW_FName
	
	//Create Fit wave
	Make /T/O/N=(0,16) $FitCoefDisplayW_FName /WAVE=FitCoefDisplayW //Initially - 8 row (1 chunk of Param Vol W)
	Make /O/N=(0,16) $FitCoefDisplaySelW_FName /WAVE=FitCoefDisplaySelW
	duplicate  /O $ZProfW_FName,$FitZProfW_FName /Wave=FitZProfW
	FitZProfW=0
	duplicate  /O $ZProfW_FName,$FitBGW_FName /Wave=FitBGW
	FitBGW=0
	//Size is 256 rows x 16 columns for any kinds of fit
	//Reset the param waves
	FitCoefDisplayW=""
	FitCoefDisplaySelW=0
	
	SetDimLabel 1,0,Ex,FitCoefDisplayW
	SetDimLabel 1,1,K,FitCoefDisplayW
	SetDimLabel 1,2,Param,FitCoefDisplayW
	SetDimLabel 1,3,Value,FitCoefDisplayW
	SetDimLabel 1,4,Guess,FitCoefDisplayW
	SetDimLabel 1,5,Hold,FitCoefDisplayW
	SetDimLabel 1,6,LLim,FitCoefDisplayW
	SetDimLabel 1,7,ULim,FitCoefDisplayW
	SetDimLabel 1,8,Disp,FitCoefDisplayW
	SetDimLabel 1,9,Corr,FitCoefDisplayW
	SetDimLabel 1,10,DLLim,FitCoefDisplayW //Color display parameter
	SetDimLabel 1,11,DULim,FitCoefDisplayW //Color display parameter
	SetDimLabel 1,12,HLLim,FitCoefDisplayW //Lower limit for histogram
	SetDimLabel 1,13,HULim,FitCoefDisplayW //Upper limit for histogram
	SetDimLabel 1,14,HBin,FitCoefDisplayW //Bin for histogram
	
	String FitMode=SLP_IXPS_ScanListW[DataRow][17]
	Variable N_Peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	Variable Kn=0
	
	If (StringMatch(FitMode,"LEEM cut-off")) // "LEEM cut-off"
		Redimension /N=(dimsize(FitCoefDisplayW,0)+4,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
		Redimension /N=(dimsize(FitCoefDisplaySelW,0)+4,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
		FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="RawMin";FitCoefDisplaySelW[0][4,7]=0
		FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="FirstDiffMin";FitCoefDisplaySelW[1][4,7]=0
		FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="SecondDiffMin";FitCoefDisplaySelW[2][4,7]=0
		FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="SecondDiffMax";FitCoefDisplaySelW[3][4,7]=0
		//FitCoefDisplaySelW[4,255][0,15]=0//Clear all unused cells
		FitCoefDisplaySelW[][0]=48 //Items to be saved (Default = check all)
		FitCoefDisplaySelW[][2]=0 //Param (K0,K1,K2,...)
		FitCoefDisplaySelW[][3]=0 //Value
		FitCoefDisplaySelW[][4]=0 //Guess
		FitCoefDisplaySelW[][5]=0 //ChkBox3 for 'Hold'
		FitCoefDisplaySelW[][6]=0 //LLim
		FitCoefDisplaySelW[][7]=0 //ULim
		FitCoefDisplaySelW[][8]=48 //ChkBox for Display (limit to 6, only if the first Chkbox is checked)
		FitCoefDisplaySelW[][9]=32 //ChkBox for Correction (limit to 1, only if the first Chkbox is checked)
		FitCoefDisplaySelW[][10]=2 //DLLim (Intensity lower limit for image)
		FitCoefDisplaySelW[][11]=2 //DULim (Intensity upper limit for image)
		FitCoefDisplaySelW[1][9]=48 //Select Cutoff (most used one)
		
	ElseIf (StringMatch(FitMode,"Secondary yield cut-off")) //"Secondary yield onset"
		Redimension /N=(dimsize(FitCoefDisplayW,0)+4,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
		Redimension /N=(dimsize(FitCoefDisplaySelW,0)+4,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
		FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Height";FitCoefDisplaySelW[0][4,7]=0;FitCoefDisplayW[0][6]="0";FitCoefDisplayW[0][7]="100000"
		FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Offset";FitCoefDisplaySelW[1][4,7]=0;FitCoefDisplayW[1][6]="0";FitCoefDisplayW[1][7]="100000"
		FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="Cutoff";FitCoefDisplaySelW[2][4,7]=0//Use algorithm instead
		FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="Width";FitCoefDisplayW[3][4]="0.5";FitCoefDisplayW[3][6]="0.05";FitCoefDisplayW[3][7]="5"
		//FitCoefDisplaySelW[4,255][0,15]=0//Clear all unused cells
		FitCoefDisplaySelW[][0]=48 //Items to be saved (Default = check all)
		FitCoefDisplaySelW[][2]=0 //Param (K0,K1,K2,...)
		FitCoefDisplaySelW[][3]=0 //Value
		FitCoefDisplaySelW[][4]=2 //Guess
		FitCoefDisplaySelW[][5]=32 //ChkBox3 for 'Hold'
		FitCoefDisplaySelW[][6]=2 //LLim
		FitCoefDisplaySelW[][7]=2 //ULim
		FitCoefDisplaySelW[][8]=48 //ChkBox for Display (limit to 6, only if the first Chkbox is checked)
		FitCoefDisplaySelW[][9]=32 //ChkBox for Correction (limit to 1, only if the first Chkbox is checked)
		FitCoefDisplaySelW[][10]=2 //DLLim (Intensity lower limit for image)
		FitCoefDisplaySelW[][11]=2 //DULim (Intensity upper limit for image)
		FitCoefDisplaySelW[2][9]=48 //Select Cutoff (most used one)
	ElseIf (StringMatch(FitMode,"Reverse GLAs Peaks (XPS)")) //"Multi GLAs"	
	
		//Guess BG parameters
		variable LLim=str2num(SLP_IXPS_ScanListW[DataRow][9]) //Fit mask positions
		variable ULim=str2num(SLP_IXPS_ScanListW[DataRow][10])
		variable init_FlatBG=ZProfW(ULim)
		variable init_StepHeight=ZProfW(LLim)-ZProfW(ULim)
		variable init_StepWidth=1
		variable init_Decay=0.0001
		variable init_Slope=(ZProfW(ULim)-ZProfW(LLim))/(ULim-LLim)
		WaveStats /Q ZProfW
		variable init_StepPos=V_maxloc
		
	
		strswitch(BG_Type)	// string switch
			case "None":	// execute if case matches expression
			case "Linear":
			case "Shirley":
				//Do nothing
				Kn=0
				break
			case "Flat":
				Redimension /N=(dimsize(FitCoefDisplayW,0)+1,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
				Redimension /N=(dimsize(FitCoefDisplaySelW,0)+1,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
				FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Flat BG";FitCoefDisplaySelW[0][4,7]=0
				FitCoefDisplaySelW[0]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				FitCoefDisplayW[0][4]=num2str(init_FlatBG) //Flat BG
				
				Kn=1
				break
			case "Slope":
				Redimension /N=(dimsize(FitCoefDisplayW,0)+2,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
				Redimension /N=(dimsize(FitCoefDisplaySelW,0)+2,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
				FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Line offset";FitCoefDisplaySelW[0][4,7]=0
				FitCoefDisplaySelW[0]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Line slope";FitCoefDisplaySelW[1][4,7]=0
				FitCoefDisplaySelW[1]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				//initialize guess values
				FitCoefDisplayW[0][4]=num2str(ZProfW(LLim)-init_Slope*LLim) 
				FitCoefDisplayW[1][4]=num2str(init_Slope) 
				
				Kn=2
				break
			case "ERF":	//SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,E)
			case "atan":
				Redimension /N=(dimsize(FitCoefDisplayW,0)+5,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
				Redimension /N=(dimsize(FitCoefDisplaySelW,0)+5,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
				FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Flat BG";FitCoefDisplaySelW[0][4,7]=0
				FitCoefDisplaySelW[0]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Step height";FitCoefDisplaySelW[1][4,7]=0
				FitCoefDisplaySelW[1]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="Step pos";FitCoefDisplaySelW[2][4,7]=0
				FitCoefDisplaySelW[2]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="Step width";FitCoefDisplaySelW[3][4,7]=0
				FitCoefDisplaySelW[3]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				FitCoefDisplayW[4][1]="K4";FitCoefDisplayW[4][2]="Decay";FitCoefDisplaySelW[4][4,7]=0
				FitCoefDisplaySelW[4]={{48},{0},{0},{0},{2},{48},{2},{2},{32},{32},{2},{2}};
				//initialize guess values
				FitCoefDisplayW[0][4]=num2str(init_FlatBG)
				FitCoefDisplayW[1][4]=num2str(init_StepHeight)
				FitCoefDisplayW[2][4]=num2str(init_StepPos)
				FitCoefDisplayW[3][4]=num2str(init_StepWidth)
				FitCoefDisplayW[4][4]=num2str(init_Decay)
				
				
				Kn=5
				break
		endswitch
		
		//Create table for GLA peak fitting
		Variable i=1
		For (i=1;i<=N_Peaks;i+=1)
			Redimension /N=(dimsize(FitCoefDisplayW,0)+5,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
			Redimension /N=(dimsize(FitCoefDisplaySelW,0)+5,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
			FitCoefDisplayW[Kn][1]="K"+num2str(Kn);FitCoefDisplayW[Kn][2]="p"+num2str(i)+"_int";FitCoefDisplayW[Kn][4]=num2str(GLAParamGssW[5*(i-1)+0]);FitCoefDisplayW[Kn][6]="0"
			FitCoefDisplaySelW[Kn]={{48},{0},{0},{0},{2},{32},{2},{2},{32},{32},{2},{2}};Kn+=1
			FitCoefDisplayW[Kn][1]="K"+num2str(Kn);FitCoefDisplayW[Kn][2]="p"+num2str(i)+"_pos";FitCoefDisplayW[Kn][4]=num2str(GLAParamGssW[5*(i-1)+1])
			FitCoefDisplaySelW[Kn]={{48},{0},{0},{0},{2},{32},{2},{2},{32},{32},{2},{2}};Kn+=1
			FitCoefDisplayW[Kn][1]="K"+num2str(Kn);FitCoefDisplayW[Kn][2]="p"+num2str(i)+"_fwhm";FitCoefDisplayW[Kn][4]=num2str(GLAParamGssW[5*(i-1)+2]);FitCoefDisplayW[Kn][6]="0.1";FitCoefDisplayW[Kn][7]="3"
			FitCoefDisplaySelW[Kn]={{48},{0},{0},{0},{2},{32},{2},{2},{32},{32},{2},{2}};Kn+=1
			FitCoefDisplayW[Kn][1]="K"+num2str(Kn);FitCoefDisplayW[Kn][2]="p"+num2str(i)+"_mix";FitCoefDisplayW[Kn][4]=num2str(GLAParamGssW[5*(i-1)+3]);FitCoefDisplayW[Kn][6]="0.001";FitCoefDisplayW[Kn][7]="0.999"
			FitCoefDisplaySelW[Kn]={{48},{0},{0},{0},{2},{32},{2},{2},{32},{32},{2},{2}};Kn+=1
			FitCoefDisplayW[Kn][1]="K"+num2str(Kn);FitCoefDisplayW[Kn][2]="p"+num2str(i)+"_as";FitCoefDisplayW[Kn][4]=num2str(GLAParamGssW[5*(i-1)+4]);FitCoefDisplayW[Kn][6]="0.001";FitCoefDisplayW[Kn][7]="0.999"
			FitCoefDisplaySelW[Kn]={{48},{0},{0},{0},{2},{32},{2},{2},{32},{32},{2},{2}};Kn+=1
		EndFor
		
				
		strswitch(BG_Type)	// Additional parameter at the end (not fit)
			case "Linear":
			case "Shirley":	
				Redimension /N=(dimsize(FitCoefDisplayW,0)+2,dimsize(FitCoefDisplayW,1)) FitCoefDisplayW
				Redimension /N=(dimsize(FitCoefDisplaySelW,0)+2,dimsize(FitCoefDisplaySelW,1)) FitCoefDisplaySelW
				FitCoefDisplayW[N_Peaks*5][1]="";FitCoefDisplayW[N_Peaks*5][2]="BG left X";FitCoefDisplaySelW[N_Peaks*5][4,7]=0
				FitCoefDisplaySelW[N_Peaks*5]={{48},{0},{0},{0},{2},{48},{0},{0},{0},{0},{0},{0}}; //Do not fit for Linear and Shirley BG
				FitCoefDisplayW[N_Peaks*5+1][1]="";FitCoefDisplayW[N_Peaks*5+1][2]="BG right X";FitCoefDisplaySelW[N_Peaks*5+1][4,7]=0
				FitCoefDisplaySelW[N_Peaks*5+1]={{48},{0},{0},{0},{2},{48},{0},{0},{0},{0},{0},{0}}; //Do not fit for Linear and Shirley BG
				FitCoefDisplayW[N_Peaks*5][4]=num2str(LLim) 
				FitCoefDisplayW[N_Peaks*5+1][4]=num2str(ULim) 
				Kn+=2
				break
		EndSwitch
		
	EndIf
//		
//			//The rest are calculated from fit params and can be used for mapping (cannot do guess or set constraints)
//			FitCoefDisplayW[7][2]="p1_area";FitCoefDisplaySelW[7][4,7]=0
//			FitCoefDisplayW[8][2]="custom1";FitCoefDisplayW[8][4]="<Formula>";FitCoefDisplaySelW[8][4]=2;FitCoefDisplaySelW[8][5,7]=0
//			FitCoefDisplayW[9][2]="custom2";FitCoefDisplayW[9][4]="<Formula>";FitCoefDisplaySelW[9][4]=2;FitCoefDisplaySelW[9][5,7]=0
//			FitCoefDisplaySelW[10,255][0,15]=0//Clear all unused cells
//			FitCoefDisplaySelW[3][0]=48 //Select p1_pos (most used one)
//		
	
//	SLP_IXPS_MakeGuessCurve(VolName,FitName)
	
End

Function SLP_IXPS_MakeGuessCurve2(VolName)
	string VolName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String GssW_FName=ImgVolW_FName+"_Gss"
	//String FitZProfW_FName=ImgVolW_FName+"_zProflFit"

	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave ZProfW=$ZProfW_FName
	//Wave FitZProfW=$FitZProfW_FName
	
	variable peak_int,peak_pos,peak_fwhm,peak_mix,peak_as
	
	Variable N_Peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String FitMode=SLP_IXPS_ScanListW[DataRow][17]
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	Variable Kn=0
	Variable LowX=0
	Variable HighX=0
	
	Duplicate /O $ZProfW_FName,$GssW_FName /Wave=GssW
	GssW=0

	If(StringMatch(FitMode,"Secondary yield cut-off"))	
		GssW=1*Erf((x-0)/str2num(FitCoefDisplayW[3][4]))
	ElseIf (StringMatch(FitMode,"Reverse GLAs Peaks (XPS)"))
		String GssBGW_FName=ImgVolW_FName+"_GssBG"
		Duplicate /O $ZProfW_FName,$GssBGW_FName /Wave=GssBGW
		strswitch(BG_Type)	// string switch
			case "None":	// execute if case matches expression
				GssBGW=0
				Kn=0
				break
			case "Flat":
				GssBGW=str2num(FitCoefDisplayW[0][4])
				Kn=1
				break
			case "Slope":
				GssBGW=str2num(FitCoefDisplayW[0][4])+str2num(FitCoefDisplayW[1][4])*x
				Kn=2
				break
			case "ERF":
				//SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,E)
				//Use negative x and x0 for XPS (reverse step
				GssBGW=SLP_Func_StohrERF(str2num(FitCoefDisplayW[0][4]),str2num(FitCoefDisplayW[1][4]),-1*str2num(FitCoefDisplayW[2][4]),str2num(FitCoefDisplayW[3][4]),str2num(FitCoefDisplayW[4][4]),-1*x)
				Kn=5
				break
			case "atan":
				//SLP_Func_atanStep(FlatBG,StepHeight,StepPos,Width,Decay,E)
				GssBGW=SLP_Func_atanStep(str2num(FitCoefDisplayW[0][4]),str2num(FitCoefDisplayW[1][4]),-1*str2num(FitCoefDisplayW[2][4]),str2num(FitCoefDisplayW[3][4]),str2num(FitCoefDisplayW[4][4]),-1*x)
				Kn=5
				break
			case "Linear":
				LowX=str2num(FitCoefDisplayW[N_Peaks*5][4])
				HighX=str2num(FitCoefDisplayW[N_Peaks*5+1][4])
				GssBGW=ZProfW(LowX)*(x<LowX)+SLP_Util_InterpolateY(LowX,HighX,ZProfW(LowX),ZProfW(HighX),x)*(x>=LowX&&x<=HighX)+ZProfW(HighX)*(x>HighX)
				Kn=0
				break
			case "Shirley":
				SLP_Util_ShirleyGen(ZProfW_FName,str2num(FitCoefDisplayW[N_Peaks*5+1][4]),str2num(FitCoefDisplayW[N_Peaks*5][4]),5,0)
				Wave ShirleyBG=$(ZProfW_FName+"_Shirley")
				GssBGW=ShirleyBG
				//killwaves ShirleyBG
				Kn=0
				break
		endswitch
		GssW+=GssBGW
		
		
		Variable i=1 //Peak number
		String GssCompW_FName=""
		String FitCompW_FName=""
		String Index_txt=""
		For (i=1;i<=N_Peaks;i+=1)
			sprintf Index_txt,"%02d",i
			GssCompW_FName=ImgVolW_FName+"_gp"+Index_txt //Guess component peak
			FitCompW_FName=ImgVolW_FName+"_fp"+Index_txt//Fit component peak (to be used later)
			Duplicate /O $ZProfW_FName,$GssCompW_FName /Wave=GssCompW
			Duplicate /O $ZProfW_FName,$FitCompW_FName /Wave=FitCompW
			FitCompW=0
			peak_int=str2num(FitCoefDisplayW[Kn][4])
			peak_pos=str2num(FitCoefDisplayW[Kn+1][4])
			peak_fwhm=str2num(FitCoefDisplayW[Kn+2][4])
			peak_mix=str2num(FitCoefDisplayW[Kn+3][4])
			peak_as=str2num(FitCoefDisplayW[Kn+4][4])
			GssCompW=SLP_Func_InvGLA(peak_int,peak_pos,peak_fwhm,peak_mix,peak_as,x)
			Kn+=5
			GssW+=GssCompW
		EndFor
	EndIf
	
	SLP_IXPS_ScanListW[DataRow][34]="0" //Display_Fit_Flag = 0 (display GUESS)
	
End

Function SLP_Util_InterpolateY(x1,x2,y1,y2,x0)
	Variable x1,x2,y1,y2,x0
	Variable y0=(x0-x1)*(y2-y1)/(x2-x1)+y1
	Return y0
End

Function SLP_IXPS_ExtCutoff_Old(VolName)
	String VolName	
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	String Current_Folder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	//String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	//Wave FitZProfW=$FitZProfW_FName
	
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	Duplicate /O ZProfW,$FitZProfW_FName /WAVE=FitZProfW
	FitZProfW=NaN
	
	Make /O/T/N=0 $FitCoefConstraintsW_FName /WAVE=FitCoefConstraintsW
	
	//Create Coef. wave
	Make /O/D/N=4 $FitCoefW_FName /WAVE=FitCoefW
	
	//Use algorithm to guess the starting values
	wavestats /Q ZProfW
	//Guess the coefs.
	
	Variable pk_height=V_max
	Variable pk_offset=V_min
	Variable cutoff_width=str2num(FitCoefDisplayW[3][4])
	Variable cutoff_pos=V_maxloc-cutoff_width/2
	
	//AUTOMATIC mask creation
	//For cut-off fitting - create a step function with 1 from stv_st to peak position of the secondary yield
	ZProfMskW=0;ZProfMskW[0,round(x2pnt(ZProfW,V_maxloc))]=1
	
	FitCoefW[0]={pk_height,pk_offset,cutoff_pos,cutoff_width}
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	String HoldStr=""
	String Constraint_txt=""
	Variable i=0
	Variable j=0
	Variable m=0
	
	For (i=0;i<4;i+=1)
		HoldStr+=num2str((FitCoefDisplaySelW[i][5]-32)/16)
	EndFor
	
	
	//Constraints
	For (j=0;j<4;j+=1)
		//LOWER LIMIT
		If (!Stringmatch(FitCoefDisplayW[j][6],"")&&!stringmatch(HoldStr[j],"1"))//If MINIMUM is entered, and parameter not being HELD.
			Constraint_txt="K"+num2str(j)+">="+FitCoefDisplayW[j][6]
			redimension /N=(dimsize(FitCoefConstraintsW,0)+1) FitCoefConstraintsW
			FitCoefConstraintsW[m]=Constraint_txt
			m+=1
		EndIf
		//UPPER LIMIT
		If (!Stringmatch(FitCoefDisplayW[j][7],"")&&!stringmatch(HoldStr[j],"1"))//If MAXIMUM is entered, and parameter not being HELD.
			Constraint_txt="K"+num2str(j)+"<="+FitCoefDisplayW[j][7]
			redimension /N=(dimsize(FitCoefConstraintsW,0)+1) FitCoefConstraintsW
			FitCoefConstraintsW[m]=Constraint_txt
			m+=1
		EndIf
	EndFor
	
	
	If (V_Value==0)
		FuncFit /W=2/Q/NTHR=0 SLP_ERF FitCoefW  ZProfW /M=ZProfMskW /D=$FitZProfW_FName /C=$FitCoefConstraintsW_FName
	ElseIf (V_Value==1) //Fast mode
		FuncFit /N=1/W=2/Q/NTHR=0 SLP_ERF FitCoefW  ZProfW /M=ZProfMskW /D=$FitZProfW_FName /C=$FitCoefConstraintsW_FName
		DoUpdate
	Endif
	
	//Put the fit result in col. 3 of FitCoefDisplayW
	FitCoefDisplayW[0,3][3]=num2str(FitCoefW[p])
	
	SetDataFolder $Current_Folder
	
	//return FitCoefW[2] //Return x0 (cut-off position)
End

Function SLP_IXPS_ExtractMultiGLAs2(VolName) //Try HRodStein's suggestion
	string VolName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ImgVolW_Name=SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfW_Name=ImgVolW_Name+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String ZProfMskW_Name=ImgVolW_Name+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitConstraintsW_Name=ImgVolW_Name+"_FCoefC"
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"
	String FitZProfW_Name=ImgVolW_Name+"_zProflFit"
	String GssBGW_FName=ImgVolW_FName+"_GssBG"
	String ShirleyBGW_FName=ZProfW_FName+"_Shirley"
	String ZProfWnBG_FName=ZProfW_FName+"_nBG"
	

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	variable LLim=str2num(SLP_IXPS_ScanListW[DataRow][9])
	variable ULim=str2num(SLP_IXPS_ScanListW[DataRow][10])
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,LLim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	Wave GssBGW=$GssBGW_FName
	
	Duplicate /O ZProfW,$FitZProfW_FName /WAVE=FitZProfW
	FitZProfW=0
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	Variable FastExt_Flg=V_Value
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Make /O/T/N=0 $FitConstraintsW_FName /Wave=FitConstraintsW
	
	Variable N_Peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String FitMode=SLP_IXPS_ScanListW[DataRow][17]
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	Variable Kn=0
	Variable i
	
	String BG_CoefW_FName=DataFolder_FName+"BGCoef"
	String BG_CoefW_Name="BGCoef"
	String GLA_CoefW_FName=""
	String GLA_CoefW_Name=""
	
	Variable LowX,HighX
	
	//V_FitError=0 prevent the code from stopping/notifying when there is fit errors..
	//From Igor Help:'Do not reference local variables in cmdStr. 
	//The command is not executed in the local environment provided by a macro or user-defined function.'
	String Fit_Str=""
	String HoldStr=""
	strswitch(BG_Type)	// string switch
		case "None":	// execute if case matches expression
			Kn=0
			break
		case "Flat":
			Make /O/D/N=1 $BG_CoefW_FName /Wave=BG_CoefW
			BG_CoefW[0]=str2num(FitCoefDisplayW[0][4])
			HoldStr=num2str((FitCoefDisplaySelW[0][5]-32)/16)
			Fit_Str+="{SLP_FitFunc_FlatBG,"+BG_CoefW_FName+",HOLD=\""+HoldStr+"\"},"
			Kn=1
			break
		case "Slope":
			Make /O/D/N=2 $BG_CoefW_FName /Wave=BG_CoefW
			BG_CoefW[0]=str2num(FitCoefDisplayW[0][4])
			BG_CoefW[1]=str2num(FitCoefDisplayW[1][4])
			HoldStr=num2str((FitCoefDisplaySelW[0][5]-32)/16)+num2str((FitCoefDisplaySelW[1][5]-32)/16)
			Fit_Str+="{line,"+BG_CoefW_FName+",HOLD=\""+HoldStr+"\"},"
			Kn=2
			break
		case "ERF":
			Make /O/D/N=5 $BG_CoefW_FName /Wave=BG_CoefW
			BG_CoefW[0]=str2num(FitCoefDisplayW[0][4])
			BG_CoefW[1]=str2num(FitCoefDisplayW[1][4])
			BG_CoefW[2]=str2num(FitCoefDisplayW[2][4])
			BG_CoefW[3]=str2num(FitCoefDisplayW[3][4])
			BG_CoefW[4]=str2num(FitCoefDisplayW[4][4])
			HoldStr=""
			For (i=0;i<5;i+=1)
				HoldStr+=num2str((FitCoefDisplaySelW[i][5]-32)/16)
			EndFor
			Fit_Str+="{SLP_FitFunc_Reverse_StohrERF,"+BG_CoefW_FName+",HOLD=\""+HoldStr+"\"},"
			Kn=5
			break
		case "atan":
			Make /O/D/N=5 $BG_CoefW_FName /Wave=BG_CoefW
			BG_CoefW[0]=str2num(FitCoefDisplayW[0][4])
			BG_CoefW[1]=str2num(FitCoefDisplayW[1][4])
			BG_CoefW[2]=str2num(FitCoefDisplayW[2][4])
			BG_CoefW[3]=str2num(FitCoefDisplayW[3][4])
			BG_CoefW[4]=str2num(FitCoefDisplayW[4][4])
			HoldStr=""
			For (i=0;i<5;i+=1)
				HoldStr+=num2str((FitCoefDisplaySelW[i][5]-32)/16)
			EndFor
			Fit_Str+="{SLP_FitFunc_Reverse_atanStep,"+BG_CoefW_FName+",HOLD=\""+HoldStr+"\"},"
			Kn=5
			break
		case "Shirley": //SHIRLEY and SLOPE - doesn't have to fit
			SLP_Util_ShirleyGen(ZProfW_FName,str2num(FitCoefDisplayW[N_Peaks*5+1][4]),str2num(FitCoefDisplayW[N_Peaks*5][4]),5,0)
			Wave ShirleyBGW=$ShirleyBGW_FName
			GssBGW=ShirleyBGW
			Duplicate /O ZProfW,$ZProfWnBG_FName /Wave=ZProfWnBG
			ZProfWnBG=ZProfW-GssBGW
			
			Kn=0
			break
		case "Linear": //SHIRLEY and SLOPE - doesn't have to fit
			LowX=str2num(FitCoefDisplayW[N_Peaks*5][4])
			HighX=str2num(FitCoefDisplayW[N_Peaks*5+1][4])
			GssBGW=ZProfW(LowX)*(x<LowX)+SLP_Util_InterpolateY(LowX,HighX,ZProfW(LowX),ZProfW(HighX),x)*(x>=LowX&&x<=HighX)+ZProfW(HighX)*(x>HighX)
			Duplicate /O ZProfW,$ZProfWnBG_FName /Wave=ZProfWnBG
			ZProfWnBG=ZProfW-GssBGW			
			
			Kn=0
			break
	endswitch
	
	Variable j=0
	Variable m=0 //Index for Fit Constraint W 'row'
	String Constraint_txt=""

	For (j=0;j<Kn;j+=1)
		//FILL IN GUESS PARAMETERS IN BG COEF WAVE
		BG_CoefW[j]=str2num(FitCoefDisplayW[j][4])
		//Create CONSTRAINT WAVE
		//LOWER LIMIT
		If (!Stringmatch(FitCoefDisplayW[j][6],"")&&!stringmatch(HoldStr[j],"1"))//If MINIMUM is entered, and parameter not being HELD.
			Constraint_txt="K"+num2str(j)+">="+FitCoefDisplayW[j][6]
			redimension /N=(dimsize(FitConstraintsW,0)+1) FitConstraintsW
			FitConstraintsW[m]=Constraint_txt
			m+=1
		EndIf
		//UPPER LIMIT
		If (!Stringmatch(FitCoefDisplayW[j][7],"")&&!stringmatch(HoldStr[j],"1"))//If MAXIMUM is entered, and parameter not being HELD.
			Constraint_txt="K"+num2str(j)+"<="+FitCoefDisplayW[j][7]
			redimension /N=(dimsize(FitConstraintsW,0)+1) FitConstraintsW
			FitConstraintsW[m]=Constraint_txt
			m+=1
		EndIf
	EndFor
	
	
	String Index_str=""
	For (i=1;i<=N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		GLA_CoefW_FName=DataFolder_FName+"GCoef"+Index_Str
		GLA_CoefW_Name="GCoef"+Index_Str //for execute text
		Make /O/D/N=5 $GLA_CoefW_FName /Wave=GLA_CoefW
		HoldStr=""
		For (j=0;j<5;j+=1)
			//FILL IN GUESS PARAMETERS IN COEF WAVE
			GLA_CoefW[j]=str2num(FitCoefDisplayW[Kn+j][4])
			
			//Create HOLD STRING
			HoldStr[j]=num2str((FitCoefDisplaySelW[Kn+j][5]-32)/16)
			
			//Create CONSTRAINT WAVE
			//LOWER LIMIT
			If (!Stringmatch(FitCoefDisplayW[Kn+j][6],"")&&!stringmatch(HoldStr[j],"1"))//If MINIMUM is entered, and parameter not being HELD.
				Constraint_txt="K"+num2str(Kn+j)+">="+FitCoefDisplayW[Kn+j][6]
				redimension /N=(dimsize(FitConstraintsW,0)+1) FitConstraintsW
				FitConstraintsW[m]=Constraint_txt
				m+=1
			EndIf
			//UPPER LIMIT
			If (!Stringmatch(FitCoefDisplayW[Kn+j][7],"")&&!stringmatch(HoldStr[j],"1"))//If MAXIMUM is entered, and parameter not being HELD.
				Constraint_txt="K"+num2str(Kn+j)+"<="+FitCoefDisplayW[Kn+j][7]
				redimension /N=(dimsize(FitConstraintsW,0)+1) FitConstraintsW
				FitConstraintsW[m]=Constraint_txt
				m+=1
			EndIf
		EndFor
		
		Fit_Str+="{SLP_FitFunc_InvGLA,"+GLA_CoefW_Name+",HOLD=\""+HoldStr+"\"},"
		
		Kn+=5
	EndFor
	Fit_Str=RemoveEnding(Fit_Str) //Remove the last ','
	
	//EXECUTE THE FIT (NOT USING 'execute' COMMAND ANYMORE)
	String CurrentFolder=GetDataFolder(1)
	Setdatafolder $DataFolder_FName
	
	Variable IXPS_FitError=0
	//NVAR V_FitError
	Variable V_FitError
	V_FitError=0 
	
	If (stringmatch(BG_type,"Shirley")||stringmatch(BG_type,"Linear"))
		FuncFit /Q/ODR=0/W=2/NTHR=0/N=(FastExt_Flg) {string=Fit_Str} $ZProfWnBG_FName /C=$FitConstraintsW_Name /D=$FitZProfW_Name /M=$ZProfMskW_Name
	Else
		FuncFit /Q/ODR=0/W=2/NTHR=0/N=(FastExt_Flg) {string=Fit_Str} $ZProfW_Name /C=$FitConstraintsW_Name /D=$FitZProfW_Name /M=$ZProfMskW_Name
	EndIf	

	SetDatafolder $CurrentFolder
	
	IXPS_FitError=V_FitError
	
	//UPDATE RESULT CURVES FROM FITTED PARAM.
	Kn=0
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	Duplicate /O $ZProfW_FName,$FitBGW_FName /Wave=FitBGW
	FitBGW=0
	strswitch(BG_Type)	// string switch
		case "None":	// execute if case matches expression
			Kn=0
			break
		case "Flat":
			FitCoefDisplayW[0][3]=num2str(BG_CoefW[0])
			FitBGW=BG_CoefW[0]
			Kn=1
			break
		
		case "Slope":
			FitCoefDisplayW[0][3]=num2str(BG_CoefW[0])
			FitCoefDisplayW[1][3]=num2str(BG_CoefW[1])
			FitBGW=BG_CoefW[0]+BG_CoefW[1]*x
			
			Kn=2
			break
		case "ERF":
			FitCoefDisplayW[0][3]=num2str(BG_CoefW[0])
			FitCoefDisplayW[1][3]=num2str(BG_CoefW[1])
			FitCoefDisplayW[2][3]=num2str(BG_CoefW[2])
			FitCoefDisplayW[3][3]=num2str(BG_CoefW[3])
			FitCoefDisplayW[4][3]=num2str(BG_CoefW[4])
			FitBGW=SLP_Func_StohrERF(BG_CoefW[0],BG_CoefW[1],-1*BG_CoefW[2],BG_CoefW[3],BG_CoefW[4],-1*x)
			
			Kn=5
			break
		case "atan":
			FitCoefDisplayW[0][3]=num2str(BG_CoefW[0])
			FitCoefDisplayW[1][3]=num2str(BG_CoefW[1])
			FitCoefDisplayW[2][3]=num2str(BG_CoefW[2])
			FitCoefDisplayW[3][3]=num2str(BG_CoefW[3])
			FitCoefDisplayW[4][3]=num2str(BG_CoefW[4])
			FitBGW=SLP_Func_atanStep(BG_CoefW[0],BG_CoefW[1],-1*BG_CoefW[2],BG_CoefW[3],BG_CoefW[4],-1*x)

			Kn=5
			break
		case "Linear": //Not fit
			FitBGW=GssBGW			
			FitZProfW+=FitBGW
			Kn=0
			break
		case "Shirley": //Not fit
			FitBGW=GssBGW			
			FitZProfW+=FitBGW
			Kn=0
			break
	endswitch
	
	String FitCompW_FName=""
	For (i=1;i<=N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		GLA_CoefW_FName=DataFolder_FName+"GCoef"+Index_Str
		Wave GLA_CoefW=$GLA_CoefW_FName
		
		FitCompW_FName=ImgVolW_FName+"_fp"+Index_Str//Fit component peak (to be used later)
		Wave FitCompW=$FitCompW_FName
		FitCompW=SLP_Func_InvGLA(GLA_CoefW[0],GLA_CoefW[1],GLA_CoefW[2],GLA_CoefW[3],GLA_CoefW[4],x)
		For (j=0;j<5;j+=1)
			FitCoefDisplayW[Kn+j][3]=num2str(GLA_CoefW[j])
		EndFor
		Kn+=5
	EndFor
	
	//DoUpdate
	Return IXPS_FitError
End

Function SLP_IXPS_CreateFitGLAPeak(VolName,MapVol_p,MapVol_q,PeaksOnBg_Flg)
	String VolName
	Variable MapVol_p,MapVol_q
	Variable PeaksOnBg_Flg //peak riding on BG
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ShirleyBGW_FName=ZProfW_FName+"_Shirley"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave MapVolW=$MapVolW_FName
	Wave ZProfW=$ZProfW_FName
	
	Variable N_peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"
	Wave FitZProfW=$FitZProfW_FName
	FitZProfW=0
	
	Variable Kn=0
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	Wave FitBGW=$FitBGW_FName
	FitBGW=0
	
	Variable LowX=str2num(FitCoefDisplayW[N_Peaks*5][4])
	Variable HighX=str2num(FitCoefDisplayW[N_Peaks*5+1][4])
	strswitch(BG_Type)	// string switch
		case "None":	// execute if case matches expression
			Kn=0
			break
		case "Flat":
			FitBGW=MapVolW[MapVol_p][MapVol_q][0]
			Kn=1
			break
		case "Slope":
			FitBGW=MapVolW[MapVol_p][MapVol_q][0]+MapVolW[MapVol_p][MapVol_q][1]*x
			Kn=2
			break
		case "ERF":
			FitBGW=SLP_Func_StohrERF(MapVolW[MapVol_p][MapVol_q][0],MapVolW[MapVol_p][MapVol_q][1],-1*MapVolW[MapVol_p][MapVol_q][2],MapVolW[MapVol_p][MapVol_q][3],MapVolW[MapVol_p][MapVol_q][4],-1*x)
			Kn=5
			break
		case "atan":
			FitBGW=SLP_Func_atanStep(MapVolW[MapVol_p][MapVol_q][0],MapVolW[MapVol_p][MapVol_q][1],-1*MapVolW[MapVol_p][MapVol_q][2],MapVolW[MapVol_p][MapVol_q][3],MapVolW[MapVol_p][MapVol_q][4],-1*x)
			Kn=5
			break
		case "Linear":
			FitBGW=ZProfW(LowX)*(x<LowX)+SLP_Util_InterpolateY(LowX,HighX,ZProfW(LowX),ZProfW(HighX),x)*(x>=LowX&&x<=HighX)+ZProfW(HighX)*(x>HighX)
			Kn=0
			break
		case "Shirley":
			SLP_Util_ShirleyGen(ZProfW_FName,HighX,LowX,5,0)
			Wave ShirleyBGW=$ShirleyBGW_FName
			FitBGW=ShirleyBGW
			Kn=0
			break
	endswitch
	FitZProfW+=FitBGW
	
	String FitCompW_FName=""
	variable peak_int,peak_pos,peak_fwhm,peak_mix,peak_as 
	String Index_Str=""
	
	Variable i
	For (i=1;i<=N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		FitCompW_FName=ImgVolW_FName+"_fp"+Index_Str//Fit component peak (to be used later)
		Wave FitCompW=$FitCompW_FName
		peak_int=MapVolW[MapVol_p][MapVol_q][Kn+0]
		peak_pos=MapVolW[MapVol_p][MapVol_q][Kn+1]
		peak_fwhm=MapVolW[MapVol_p][MapVol_q][Kn+2]
		peak_mix=MapVolW[MapVol_p][MapVol_q][Kn+3]
		peak_as=MapVolW[MapVol_p][MapVol_q][Kn+4] 
		
		FitCompW=SLP_Func_InvGLA(peak_int,peak_pos,peak_fwhm,peak_mix,peak_as,x)
		FitZProfW+=FitCompW
		If (PeaksOnBg_Flg) //If want to have peak riding on BG
			FitCompW+=FitBGW
		EndIf
		Kn+=5
	EndFor
End

Function SLP_IXPS_CreateFitERF(VolName,MapVol_p,MapVol_q)
	String VolName
	Variable MapVol_p,MapVol_q
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ShirleyBGW_FName=ZProfW_FName+"_Shirley"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave MapVolW=$MapVolW_FName
	Wave ZProfW=$ZProfW_FName
	
	
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"
	Wave FitZProfW=$FitZProfW_FName
	FitZProfW=0
	
	
	String FitCompW_FName=""
	String Index_Str=""
	Variable ERF_Height,ERF_Offset,ERF_Cutoff,ERF_Width
	ERF_Height=MapVolW[MapVol_p][MapVol_q][0]
	ERF_Offset=MapVolW[MapVol_p][MapVol_q][1]
	ERF_Cutoff=MapVolW[MapVol_p][MapVol_q][2]
	ERF_Width=MapVolW[MapVol_p][MapVol_q][3]	
	FitZProfW=ERF_Height* erf((x-ERF_Cutoff)/ERF_Width)+ERF_Offset
		
End



Function SLP_FitFunc_Reverse_StohrERF(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = FlatBG
	//CurveFitDialog/ w[1] = StepHeight
	//CurveFitDialog/ w[2] = StepPos
	//CurveFitDialog/ w[3] = Width
	//CurveFitDialog/ w[4] = Decay

	return SLP_Func_StohrERF(w[0],w[1],-1*w[2],w[3],w[4],-1*x)
End

Function SLP_FitFunc_Reverse_atanStep(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = SLP_Func_atanStep(FlatBG,StepHeight,StepPos,Width,Decay,x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = FlatBG
	//CurveFitDialog/ w[1] = StepHeight
	//CurveFitDialog/ w[2] = StepPos
	//CurveFitDialog/ w[3] = Width
	//CurveFitDialog/ w[4] = Decay

	return SLP_Func_atanStep(w[0],w[1],-1*w[2],w[3],w[4],-1*x)
End

Function SLP_FitFunc_FlatBG(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = a*x+C
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 2
	//CurveFitDialog/ w[0] = C
	//CurveFitDialog/ w[1] = a

	return w[0]
End

Function SLP_FitFunc_StrightLine(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = a*x+C
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 2
	//CurveFitDialog/ w[0] = C
	//CurveFitDialog/ w[1] = a

	return w[1]*x+w[0]
End

Function SLP_IXPS_CreateParamMap2(VolName,Display_Flg)
	String VolName
	Variable Display_Flg //Update the results but slow down the whole process
	
	NVAR ExtProgress=root:Package_SLP:ImgXPS:ExtProgress
	SVAR Message_Log=root:Package_SLP:ImgXPS:Message_Log
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ScrnMskW_FName=ImgVolW_FName+"_Scrn"
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"//Histogram
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS" 
	String ErrorImgW_FName=ImgVolW_FName+"_Error"
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ScrnMskW=$ScrnMskW_FName
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	variable LLim=str2num(SLP_IXPS_ScanListW[DataRow][9])
	variable ULim=str2num(SLP_IXPS_ScanListW[DataRow][10])
	Variable Bin=str2num(SLP_IXPS_ScanListW[DataRow][16])
	String FitMode=SLP_IXPS_ScanListW[DataRow][17]
	Variable N_peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	
	string ExtCmd=""
	variable SVPoint=21 //Savitzy-Golay smoothing
	
	//Determine the number of fit parameters
	variable N_Params=0
	If (StringMatch(FitMode,"LEEM cut-off"))
		N_Params=4
	ElseIf (StringMatch(FitMode,"Secondary yield cut-off"))
		N_Params=4
	Elseif (StringMatch(FitMode,"Reverse GLAs Peaks (XPS)"))
		N_Params=Stringmatch(BG_Type,"Flat")*1+Stringmatch(BG_Type,"Slope")*2+Stringmatch(BG_Type,"ERF")*5+Stringmatch(BG_Type,"atan")*5+N_peaks*5
	EndIf
	
	//Create MapVolW & SetScale
	Make /O/N=(Ceil(dimsize(ImgVolW,0)/Bin),Ceil(dimsize(ImgVolW,1)/Bin),N_Params) $MapVolW_FName /Wave=MapVolW
	MapVolW=NaN //Set BG to NAN
	Make /O/N=(Ceil(dimsize(ImgVolW,0)/Bin),Ceil(dimsize(ImgVolW,1)/Bin)) $ErrorImgW_FName /Wave=ErrorImgW
	ErrorImgW=NaN
		//Set scale of MapVol
	Variable FOV=str2num(SLP_IXPS_ScanListW[DataRow][32])
	Variable xMin=str2num(SLP_IXPS_ScanListW[DataRow][28])
	Variable xMax=str2num(SLP_IXPS_ScanListW[DataRow][29])
	Variable yMin=str2num(SLP_IXPS_ScanListW[DataRow][30])
	Variable yMax=str2num(SLP_IXPS_ScanListW[DataRow][31]) 
	SLP_IXPS_SetXYScale(MapVolW_FName,FOV,xMin,xMax,yMin,yMax,Bin) //[FUNC]SLP_IXPS_SetXYScale
	
	//LOOP BEGIN
	variable i=0
	variable j=0
	variable k=0
	ExtProgress=0
	variable N_points=sum(ScrnMskW)/Bin^2 //To calculate the % extraction progress
	Variable IXPS_FitError=0
	Variable DisplayPeriod=1000 //Show a fit result every N images
	
		//put If before the loop to reduce computation time
	
	If (StringMatch(FitMode,"LEEM cut-off")) // "LEEM cut-off"
		For (i=0;i<dimsize(ImgVolW,0);i+=Bin)
			For (j=0;j<dimsize(ImgVolW,1);j+=Bin)
				If (ScrnMskW[i][j])
					SLP_IXPS_ExtractZProfile(VolName,i,j,Bin)
					
					SLP_IXPS_LEEMCutOff(VolName,SVPoint) //[FUNC]SLP_IXPS_LEEMCutOff
				
					MapVolW[i/Bin][j/Bin][]=str2num(FitCoefDisplayW[r][3])
					ErrorImgW[i/Bin][j/Bin]=IXPS_FitError
					k+=1
					ExtProgress=floor(k/N_points*100)
					Message_Log="Extraction: "+num2str(ExtProgress)+"%"
					If (Display_Flg)
						DoUpdate
					ElseIf (!Display_Flg)
						If (!mod(k,DisplayPeriod)) //show only every N steps
							DoUpdate
						EndIf
					EndIF
				EndIf
			EndFor
		EndFor	
	ElseIf (StringMatch(FitMode,"Secondary yield cut-off")) //"Secondary yield onset"
		For (i=0;i<dimsize(ImgVolW,0);i+=Bin)
			For (j=0;j<dimsize(ImgVolW,1);j+=Bin)
				If (ScrnMskW[i][j])
					SLP_IXPS_ExtractZProfile(VolName,i,j,Bin)
									
					SLP_IXPS_ExtCutoff(VolName) //[FUNC]SLP_IXPS_ExtCutoff
									
					MapVolW[i/Bin][j/Bin][]=str2num(FitCoefDisplayW[r][3])
					ErrorImgW[i/Bin][j/Bin]=IXPS_FitError
					k+=1
					ExtProgress=floor(k/N_points*100)
					Message_Log="Extraction: "+num2str(ExtProgress)+"%"
					If (Display_Flg)
						DoUpdate
					ElseIf (!Display_Flg)
						If (!mod(k,DisplayPeriod)) //show only every N steps
							DoUpdate
						EndIf
					EndIF
				EndIf
			EndFor
		EndFor	
	ElseIf (StringMatch(FitMode,"Reverse GLAs Peaks (XPS)"))  //Multi GLA peak
		For (i=0;i<dimsize(ImgVolW,0);i+=Bin)
			For (j=0;j<dimsize(ImgVolW,1);j+=Bin)
				If (ScrnMskW[i][j])
					SLP_IXPS_ExtractZProfile(VolName,i,j,Bin)
				
					IXPS_FitError=SLP_IXPS_ExtractMultiGLAs2(VolName)
					
					MapVolW[i/Bin][j/Bin][]=str2num(FitCoefDisplayW[r][3])
					ErrorImgW[i/Bin][j/Bin]=IXPS_FitError
					k+=1
					ExtProgress=floor(k/N_points*100)
					Message_Log="Extraction: "+num2str(ExtProgress)+"%"
					If (Display_Flg)
						DoUpdate
					ElseIf (!Display_Flg)
						If (!mod(k,DisplayPeriod)) //show only every N steps
							DoUpdate
						EndIf
					EndIF
				EndIf
			EndFor
		EndFor
		SLP_IXPS_ScanListW[DataRow][59]="1"	
	EndIf
	
	//SetDataFolder $Current_Folder
End



Function SetVarProc_IXPS_N_Peaks(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			
			SLP_IXPS_ScanListW[SelRow][48]=num2str(dval)
			SLP_IXPS_FitInit2(VolName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function PopMenuProc_IXPS_BG_Type(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			
			SLP_IXPS_ScanListW[SelRow][8]=popStr
			SLP_IXPS_FitInit2(VolName)
			SLP_IXPS_MakeGuessCurve2(VolName)
			SLP_IXPS_DisplaySelectedData(VolName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_Zoom2Mask(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			variable LLim=str2num(SLP_IXPS_ScanListW[SelRow][9])
			variable ULim=str2num(SLP_IXPS_ScanListW[SelRow][10])
			variable margin=(ULim-LLim)*0.05
			
			SetAxis /W=SLP_ImgXPS_Panel_01#IX_FittingWin bottom LLim-margin,ULim+margin
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_FullZoom(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			SetAxis /W=SLP_ImgXPS_Panel_01#IX_FittingWin /A bottom
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_UpdateZProfile()
	NVAR zProfBin=root:Package_SLP:ImgXPS:zProfBin
	//SetActiveSubwindow SLP_ImgXPS_Panel_01#IX_IMGW
	// Handle activate
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW		
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
						
	variable vol_X=pcsr(A,"SLP_ImgXPS_Panel_01#IX_IMGW")
	variable vol_Y=qcsr(A,"SLP_ImgXPS_Panel_01#IX_IMGW")
	variable ExtBin=str2num(SLP_IXPS_ScanListW[SelRow][16])
	
	SLP_IXPS_ScanListW[SelRow][42]=num2str(vol_X)
	SLP_IXPS_ScanListW[SelRow][43]=num2str(vol_Y)
	SLP_IXPS_ExtractZProfile(VolName,Vol_x,Vol_y,zProfBin)
	
	If (str2num(SLP_IXPS_ScanListW[SelRow][34])&&StringMatch(SLP_IXPS_ScanListW[SelRow][17],"Reverse GLAs Peaks (XPS)")) //Ext. flag
		SLP_IXPS_CreateFitGLAPeak(VolName,floor(vol_X/ExtBin),floor(vol_Y/ExtBin),0)
	ElseIf (str2num(SLP_IXPS_ScanListW[SelRow][34])&&StringMatch(SLP_IXPS_ScanListW[SelRow][17],"Secondary yield cut-off"))
		SLP_IXPS_CreateFitERF(VolName,floor(vol_X/ExtBin),floor(vol_Y/ExtBin))
	EndIF
End




Function SLP_IXPS_ExtractMultiGLAs(VolName)
	string VolName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ImgVolW_Name=SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfW_Name=ImgVolW_Name+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String ZProfMskW_Name=ImgVolW_Name+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitConstraintsW_Name=ImgVolW_Name+"_FCoefC"
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"
	String FitZProfW_Name=ImgVolW_Name+"_zProflFit"

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	variable LLim=str2num(SLP_IXPS_ScanListW[DataRow][9])
	variable ULim=str2num(SLP_IXPS_ScanListW[DataRow][10])
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,LLim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	Duplicate /O ZProfW,$FitZProfW_FName /WAVE=FitZProfW
	FitZProfW=0
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	Variable FastExt_Flg=V_Value
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Make /O/T/N=0 $FitConstraintsW_FName /Wave=FitConstraintsW
	
	Variable FitMode=str2num(SLP_IXPS_ScanListW[DataRow][48])
	String BG_Type=SLP_IXPS_ScanListW[DataRow][49]
	Variable Kn=0
	Variable i
	
	String BG_CoefW_FName=DataFolder_FName+"BGCoef"
	String BG_CoefW_Name="BGCoef"
	String GLA_CoefW_FName=""
	String GLA_CoefW_Name=""
	
	//V_FitError=0 prevent the code from stopping/notifying when there is fit errors..
	//From Igor Help:'Do not reference local variables in cmdStr. 
	//The command is not executed in the local environment provided by a macro or user-defined function.'
	String Fit_Str="V_FitError=0 ;FuncFit /Q/ODR=0/W=2/NTHR=0/N="+num2str(FastExt_Flg)+" {"
	String HoldStr=""
	strswitch(BG_Type)	// string switch
		case "None":	// execute if case matches expression
			Kn=0
			break
		case "Flat":
			Make /O/D/N=1 $BG_CoefW_FName /Wave=BG_CoefW
			Kn=1
			break
		case "Linear":
			Make /O/D/N=2 $BG_CoefW_FName /Wave=BG_CoefW
			Kn=2
			break
		case "Shirley":
			Make /O/D/N=2 $BG_CoefW_FName /Wave=BG_CoefW
			Kn=2
			break
		case "Slope":
			Make /O/D/N=2 $BG_CoefW_FName /Wave=BG_CoefW
			BG_CoefW[0]=str2num(FitCoefDisplayW[0][4])
			BG_CoefW[1]=str2num(FitCoefDisplayW[1][4])
			HoldStr=num2str((FitCoefDisplaySelW[0][5]-32)/16)+num2str((FitCoefDisplaySelW[1][5]-32)/16)
			Fit_Str+="{SLP_FitFunc_StrightLine,BGCoef,HOLD=\""+HoldStr+"\"}"
			Kn=2
			break
		case "ERF":
			Make /O/D/N=5 $BG_CoefW_FName /Wave=BG_CoefW
			Kn=5
			break
		case "atan":
			Make /O/D/N=5 $BG_CoefW_FName /Wave=BG_CoefW
			Kn=5
			break
	endswitch
	
	String Index_str=""
	Variable j=0
	Variable m=0
	String Constraint_txt=""
	For (i=1;i<=FitMode;i+=1)
		sprintf Index_str,"%02d",i
		GLA_CoefW_FName=DataFolder_FName+"GCoef"+Index_Str
		GLA_CoefW_Name="GCoef"+Index_Str //for execute text
		Make /O/D/N=5 $GLA_CoefW_FName /Wave=GLA_CoefW
		HoldStr=""
		For (j=0;j<5;j+=1)
			GLA_CoefW[j]=str2num(FitCoefDisplayW[Kn+j][4])
			HoldStr[j]=num2str((FitCoefDisplaySelW[Kn+j][5]-32)/16)
			//Constraints
			If (!Stringmatch(FitCoefDisplayW[Kn+j][6],"")&&!stringmatch(HoldStr[j],"1"))//If minimum is entered, and parameter not being HELD.
				Constraint_txt="K"+num2str(Kn+j)+">="+FitCoefDisplayW[Kn+j][6]
				redimension /N=(dimsize(FitConstraintsW,0)+1) FitConstraintsW
				FitConstraintsW[m]=Constraint_txt
				m+=1
			EndIf
			If (!Stringmatch(FitCoefDisplayW[Kn+j][7],"")&&!stringmatch(HoldStr[j],"1"))//If minimum is entered, and parameter not being HELD.
				Constraint_txt="K"+num2str(Kn+j)+"<="+FitCoefDisplayW[Kn+j][7]
				redimension /N=(dimsize(FitConstraintsW,0)+1) FitConstraintsW
				FitConstraintsW[m]=Constraint_txt
				m+=1
			EndIf
		EndFor
		
		Fit_Str+=",{SLP_FitFunc_InvGLA,"+GLA_CoefW_Name+",HOLD=\""+HoldStr+"\"}"
		
		Kn+=5
	EndFor
	
	Fit_Str+="} "+ZProfW_Name+"/C="+FitConstraintsW_Name+"/D="+FitZProfW_Name+ "/M="+ZProfMskW_Name
	
	//Execute
	String CurrentFolder=GetDataFolder(1)
	Setdatafolder $DataFolder_FName
	
	Variable IXPS_FitError=0
	Execute Fit_str
	NVAR V_FitError
	SetDatafolder $CurrentFolder
	//DoUpdate
	IXPS_FitError=V_FitError
	
	//Update
	Kn=0
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	Duplicate /O $ZProfW_FName,$FitBGW_FName /Wave=FitBGW
	FitBGW=0
	strswitch(BG_Type)	// string switch
		case "None":	// execute if case matches expression
			Kn=0
			break
		case "Flat":
			
			Kn=1
			break
		case "Linear":
	
			Kn=2
			break
		case "Shirley":
			Kn=2
			break
		case "Slope":
			FitCoefDisplayW[0][3]=num2str(BG_CoefW[0])
			FitCoefDisplayW[1][3]=num2str(BG_CoefW[1])
			FitBGW=BG_CoefW[0]+BG_CoefW[1]*x
			Kn=2
			break
		case "ERF":
			Kn=5
			break
		case "atan":
			Kn=5
			break
	endswitch
	
	String FitCompW_FName=""
	For (i=1;i<=FitMode;i+=1)
		sprintf Index_str,"%02d",i
		GLA_CoefW_FName=DataFolder_FName+"GCoef"+Index_Str
		Wave GLA_CoefW=$GLA_CoefW_FName
		
		FitCompW_FName=ImgVolW_FName+"_fp"+Index_Str//Fit component peak (to be used later)
		Wave FitCompW=$FitCompW_FName
		FitCompW=SLP_Func_InvGLA(GLA_CoefW[0],GLA_CoefW[1],GLA_CoefW[2],GLA_CoefW[3],GLA_CoefW[4],x)
		For (j=0;j<5;j+=1)
			FitCoefDisplayW[Kn+j][3]=num2str(GLA_CoefW[j])
		EndFor
		Kn+=5
	EndFor
	
	Return IXPS_FitError
End





Function ButtonProc_DXPS_LoadScan(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			SLP_DXPS_LoadSingleScan("",1)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function CheckProc_DXPS_PkAsgn(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW			
			ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			SLP_DXPS_ScanListW[SelRow][27]=num2str(checked)
			SLP_DXPS_DispPeakAssign(0)
			ShowInfo /CP=0 /W=SLP_DispXPS_Panel_01
			SetActiveSubwindow SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function CheckProc_DXPS_BE(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			Wave /T SLP_DXPS_XPSParamW=root:Package_SLP:DispXPS:SLP_DXPS_XPSParamW
			
			ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			string VolName=SLP_DXPS_ScanListW[SelRow][0]
			string ImgVolW_FName=SLP_DXPS_ScanListW[SelRow][1]+SLP_DXPS_ScanListW[SelRow][0]
			string CombinedSpectraW_FName=ImgVolW_FName+"_Cmbnd"
			string CombinedSpectraBEW_FName=ImgVolW_FName+"_CmbndBE"
			
			SLP_DXPS_ScanListW[SelRow][26]=num2str(checked)
			
			SLP_DXPS_CreateBESpectrum()
			SLP_DXPS_DisplaySelectedData(VolName)
			If(Checked) //If BE is selected
				SLP_DXPS_PT_UpdateTag()
			Else //If KE is selected
				SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
			EndIF
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function ButtonProc_DXPS_CopyDispL(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW 
			
			//Target scan (currently selected scan) (to copy to)
  			ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			String TgtScanName=SLP_DXPS_ScanListW[SelRow][0]
			
			//Source scan (to copy from)
			String ScanList=""
			variable i=0
			variable N_Scans=dimsize(SLP_DXPS_ScanListW,0)
			String SrcScanName=""
			//Create a list string which contains all the scans
			For (i=0;i<N_Scans;i+=1)
				If (!Stringmatch(TgtScanName,SLP_DXPS_ScanListW[i][0]))
					ScanList+=SLP_DXPS_ScanListW[i][0]+";"
				EndIf
			EndFor
			//Ask user to select the src. scan
			Prompt SrcScanName,"Scan",popup,ScanList
  			DoPrompt "Choose a scan to copy the dispersive line from",SrcScanName
  			If (V_Flag==0) //If user clicks 'Continue'
	  			SLP_DXPS_CopyDispL(SrcScanName,TgtScanName)
	  			SLP_DXPS_DisplaySelectedData(TgtScanName)
	  			
	  			SetVariable  SetVar_Threshold valueColor=(39321,39321,39321),win=SLP_DispXPS_Panel_01
	  			SetVariable SetVar_MinSize valueColor=(39321,39321,39321),win=SLP_DispXPS_Panel_01
	  			SLP_DXPS_ScanListW[SelRow][24]="y"
  			EndIf
  			
  			NVAR Offset=root:Package_SLP:DispXPS:Offset
			NVAR LPLength=root:Package_SLP:DispXPS:LPLength
			NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
			NVAR NLines=root:Package_SLP:DispXPS:NLines
			NVAR DispFactor=root:Package_SLP:DispXPS:DispFactor
			NVAR CenterPointX=root:Package_SLP:DispXPS:CenterPointX
			NVAR  CenterPointY= root:Package_SLP:DispXPS:CenterPointY
  			SLP_DXPS_CreateSpectra(TgtScanName,LPWidth)
			SLP_DXPS_MergeSpectra(TgtScanName,CenterPointX,CenterPointY,DispFactor)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_CopyDispL(SrcScanName,TgtScanName)
	String SrcScanName,TgtScanName
	
	variable SrcRow=SLP_DXPS_FindDataRow(SrcScanName)
	variable TgtRow=SLP_DXPS_FindDataRow(TgtScanName)
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	//Copy Disp.line
	string SrcDispLine_XWave_FName=SLP_DXPS_ScanListW[SrcRow][1]+SLP_DXPS_ScanListW[SrcRow][0]+"_DispLX"
	string SrcDispLine_YWave_FName=SLP_DXPS_ScanListW[SrcRow][1]+SLP_DXPS_ScanListW[SrcRow][0]+"_DispLY"
	string TgtDispLine_XWave_FName=SLP_DXPS_ScanListW[TgtRow][1]+SLP_DXPS_ScanListW[TgtRow][0]+"_DispLX"
	string TgtDispLine_YWave_FName=SLP_DXPS_ScanListW[TgtRow][1]+SLP_DXPS_ScanListW[TgtRow][0]+"_DispLY"
	
	If (Exists(SrcDispLine_XWave_FName))
		Duplicate /O $SrcDispLine_XWave_FName,$TgtDispLine_XWave_FName
		Duplicate /O $SrcDispLine_YWave_FName,$TgtDispLine_YWave_FName
		SLP_DXPS_ScanListW[TgtRow][19]=SLP_DXPS_ScanListW[SrcRow][19] //x1
		SLP_DXPS_ScanListW[TgtRow][20]=SLP_DXPS_ScanListW[SrcRow][20] //y1
		SLP_DXPS_ScanListW[TgtRow][21]=SLP_DXPS_ScanListW[SrcRow][21] //x2
		SLP_DXPS_ScanListW[TgtRow][22]=SLP_DXPS_ScanListW[SrcRow][22] //y2
		
		//Copy P. lines param.
		SLP_DXPS_ScanListW[TgtRow][7]=SLP_DXPS_ScanListW[SrcRow][7] //Offset
		SLP_DXPS_ScanListW[TgtRow][10]=SLP_DXPS_ScanListW[SrcRow][10] //N_Lines
		SLP_DXPS_ScanListW[TgtRow][8]=SLP_DXPS_ScanListW[SrcRow][8]//LPLength
		SLP_DXPS_ScanListW[TgtRow][9]=SLP_DXPS_ScanListW[SrcRow][9]//LPWidth
		
		NVAR Offset=root:Package_SLP:DispXPS:Offset
		NVAR LPLength=root:Package_SLP:DispXPS:LPLength
		NVAR LPWidth=root:Package_SLP:DispXPS:LPWidth
		NVAR NLines=root:Package_SLP:DispXPS:NLines
		
		Offset=str2num(SLP_DXPS_ScanListW[TgtRow][7])
		LPLength=str2num(SLP_DXPS_ScanListW[TgtRow][8])
		LPWidth=str2num(SLP_DXPS_ScanListW[TgtRow][9])
		NLines=str2num(SLP_DXPS_ScanListW[TgtRow][10])
		SLP_DXPS_CreateMultiPLines(TgtScanName,Offset,LPLength,NLines)
	EndIf
End

Function /S SLP_DXPS_GenListFromChk()
	//Return a string that lists the checked items in the ScanList listbox.
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
	
	String Chked_ScanList=""
	variable N_Scans=dimsize(SLP_DXPS_ScanListDisplaySelW,0)
	
	variable i=0
	For (i=0;i<N_Scans;i+=1)
		If (SLP_DXPS_ScanListDisplaySelW[i][0]==48||SLP_DXPS_ScanListDisplaySelW[i][0]==49)
			Chked_ScanList+=SLP_DXPS_ScanListW[i][0]+";"
		EndIf
	EndFor
	
	Return Chked_ScanList
End



Function SLP_DXPS_RestoreRawData(ScanName)
	String ScanName
	
	String CurrentFolder=GetDataFolder(1)
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	variable DataRow=SLP_DXPS_FindDataRow(ScanName) //[CODE:SLP_DXPS_FindDataRow]
	
	//string ImgW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	string RawDataPath=SLP_DXPS_ScanListW[DataRow][2]
	string DataFolder_FName=SLP_DXPS_ScanListW[DataRow][1]
	SetDataFolder $DataFolder_FName
	
	variable zStart=str2num(SLP_DXPS_ScanListW[DataRow][14])
	variable zStep=str2num(SLP_DXPS_ScanListW[DataRow][16])
	
	//Check if the raw data is stil there
	NewPath SLP_DataPathTmp, RawDataPath
	PathInfo SLP_DataPathTmp
	RawDataPath=S_Path
	SLP_DXPS_ScanListW[DataRow][2]=RawDataPath
	KillPath SLP_DataPathTmp
	
	//Load series of images to a 3d volume [CODE:SLP_Util_LoadMultImg2Vol]
	SLP_Util_LoadMultImg2Vol(RawDataPath,ScanName,zStart,zStep)
			
	//Go back 
	SetDataFolder $CurrentFolder
End

Function ButtonProc_DXPS_RestoreRawData(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			DoAlert 1,"The image data will be restored from the recorded location. This may increases the project file size significantly. Continue?"
			If (V_Flag==1)
				Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
				//Make a list of the checked items [CODE:SLP_DXPS_GenListFromChk]
				string Chked_ScanList=SLP_DXPS_GenListFromChk()
				string ScanName=""
				variable DataRow=0
				
				variable i=0
				For (i=0;i<itemsinList(Chked_ScanList,";");i+=1)
					ScanName=stringfromList(i,Chked_ScanList)
					
					SLP_DXPS_RestoreRawData(ScanName)
					
					DataRow=SLP_DXPS_FindDataRow(ScanName) //[CODE:SLP_DXPS_FindDataRow]
					
					//Update the RawDataDel_Flg in the WaveList
					SLP_DXPS_ScanListW[DataRow][25]=""
					
				EndFor
				
				//Toggle the Dispersive Line Creation controls
				ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
				variable SelRow=V_Value
				If (!stringmatch(SLP_DXPS_ScanListW[SelRow][25],"y"))
					SLP_DXPS_TgglControls("Enable")
				EndIf
				
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DXPS_DelRawData(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
			DoAlert 1,"The image data will be removed from the checked item(s) to reduce this project file size. You can no longer extract spectra but can still correct the energy. Continue?"
			If (V_Flag==1)
				//Make a list of the checked items [CODE:SLP_DXPS_GenListFromChk]
				string Chked_ScanList=SLP_DXPS_GenListFromChk()
				variable i=0
				string ScanName=""
				string ImgW_FName=""
				variable DataRow=0
				For (i=0;i<itemsinList(Chked_ScanList,";");i+=1)
					ScanName=stringfromList(i,Chked_ScanList)
					DataRow=SLP_DXPS_FindDataRow(ScanName)
					//Delete the raw data
					ImgW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
					If (Exists(ImgW_FName))
						Killwaves $ImgW_FName
					EndIF
					//Update the RawDataDel_Flg in the WaveList
					SLP_DXPS_ScanListW[DataRow][25]="y"
				EndFor
			Endif
			
			ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			If (stringmatch(SLP_DXPS_ScanListW[SelRow][25],"y"))
				SLP_DXPS_TgglControls("Disable")
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DXPS_TgglControls(Tggl)
	string Tggl //Can be either "Enable" or "Disable"
	
	If (Stringmatch(Tggl,"Enable"))
		SetVariable SetVar_Threshold,win=SLP_DispXPS_Panel_01,disable=0
		SetVariable SetVar_MinSize,win=SLP_DispXPS_Panel_01,disable=0
		SetVariable SetVar_Offset,win=SLP_DispXPS_Panel_01,disable=0
		SetVariable SetVar_LPLength,win=SLP_DispXPS_Panel_01,disable=0
		SetVariable SetVar_LPWidth,win=SLP_DispXPS_Panel_01,disable=0
		SetVariable SetVar_NLines,win=SLP_DispXPS_Panel_01,disable=0
		Button Button_CreateSpectra,win=SLP_DispXPS_Panel_01,disable=0,title="Create spectra",fColor=(65535,65535,65535)
		Button Button_CopyDispL,win=SLP_DispXPS_Panel_01,disable=0
		Button Button_Correct1stInt,win=SLP_DispXPS_Panel_01,disable=0
		Button Button_EditDispL,win=SLP_DispXPS_Panel_01,disable=0
		//Button Button_Restore,win=SLP_DispXPS_Panel_01,disable=2
	Elseif (StringMatch(Tggl,"Disable"))
		SetVariable SetVar_Threshold,win=SLP_DispXPS_Panel_01,disable=2
		SetVariable SetVar_MinSize,win=SLP_DispXPS_Panel_01,disable=2
		SetVariable SetVar_Offset,win=SLP_DispXPS_Panel_01,disable=2
		SetVariable SetVar_LPLength,win=SLP_DispXPS_Panel_01,disable=2
		SetVariable SetVar_LPWidth,win=SLP_DispXPS_Panel_01,disable=2
		SetVariable SetVar_NLines,win=SLP_DispXPS_Panel_01,disable=2
		Button Button_CreateSpectra,win=SLP_DispXPS_Panel_01,disable=2,title="Raw data was removed",fColor=(65535,0,0)
		Button Button_CopyDispL,win=SLP_DispXPS_Panel_01,disable=2
		Button Button_Correct1stInt,win=SLP_DispXPS_Panel_01,disable=2
		Button Button_EditDispL,win=SLP_DispXPS_Panel_01,disable=2
		//Button Button_Restore,win=SLP_DispXPS_Panel_01,disable=0
	EndIf

End

Function ButtonProc_DXPS_SelAll(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
			SLP_DXPS_ScanListDisplaySelW[][0]=48
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DXPS_SelNone(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave SLP_DXPS_ScanListDisplaySelW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListDisplaySelW
			SLP_DXPS_ScanListDisplaySelW[][0]=32
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

//Function ButtonProc_DXPS_ExpCmbnSpectrm(ba) : ButtonControl
//	STRUCT WMButtonAction &ba
//
//	switch( ba.eventCode )
//		case 2: // mouse up
//			// click code here
//			SLP_DXPS_ExpCmbnSpectrm()
//			break
//		case -1: // control being killed
//			break
//	endswitch
//
//	return 0
//End

Function ButtonProc_DXPS_EditDispL(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_DXPS_EditDispLine()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DXPS_Done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K SLP_DispXPS_Panel_01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_Util_LoadElmitecOldDAT(ce_Filename,ce_ImgName)
	//Only works for old .DAT files that don't contain header info (img data always starts from byte 392)
	//Ask users to choose file if FileName is ""
	string ce_FileName
	string ce_ImgName
	
	If (Stringmatch(ce_Filename,""))
		GetFileFolderInfo /Q
		ce_FileName=S_path
	Endif
	
	variable ce_RefNum
	open /R ce_RefNum as ce_Filename
	//DoUpdate
	
	variable ce_F_Addr
	variable ce_F_value
	
	variable ce_AttachedRecipeSize=0
	variable ce_AttachedMarkupSize=0
	variable ce_LEEMDataSize=0
	
	variable ce_ImWidth=0
	variable ce_ImHeight=0
	variable ce_ImStLocation=0
	
	//Read Image Width&Height
	ce_F_Addr=40 //byte no. 40 where the img width&height are stored
	fsetpos ce_RefNum,ce_F_Addr
	fbinread /F=2 ce_RefNum, ce_F_value
	ce_ImWidth=ce_F_value
	fbinread /F=2 ce_RefNum, ce_F_value
	ce_ImHeight=ce_F_value
	
	//Load the image
	Make /O/R/N=(ce_ImWidth,ce_ImHeight) $ce_ImgName /WAVE=Img_Wave
	//Create an image wave of the specified width and height
	
	ce_ImStLocation=392 //This is where the image data starts (for old .dat files that don't contain any other header info)
	
	fsetpos ce_RefNum,ce_ImStLocation
	Fbinread /F=2 ce_RefNum,Img_Wave

	Close ce_RefNum
End

Function SLP_Util_Make3DVolFromFolder(Folder_FName,VolW_Name)
	//From Igor folder - merge all images into a single 3D volume
	//[NOTE] all image waves must have the same dimension
	String Folder_FName,VolW_Name
	
	Variable i=0
	String CurrentFolder=Getdatafolder(1)
	SetDataFolder $Folder_FName
	String WNameList=WaveList("*",";","")
	Variable N_Waves=itemsinlist(WNameList,";")
	String WName=StringFromList(0,WNameList,";")
	Wave ImgW=$WName
	Make /O/N=(dimsize(ImgW,0),dimsize(ImgW,1),N_Waves) $VolW_Name /WAVE=VolW
	
	For (i=0;i<N_Waves;i+=1)
		Wave ImgW=$(StringFromList(i,WNameList,";"))
		VolW[][][i]=ImgW[p][q]
	EndFor
	
	SetDataFolder $CurrentFolder
End

Function SLP_Util_LoadMultImg2Vol(ImageFolder,VolName,zStart,zStep)
	//From image (.tif) files - merge images into a 3D volume
	string ImageFolder,VolName
	variable zStart,zStep
	
	newpath /Q/O SLP_ImagePath ImageFolder
	
	//To make it compatible with both .tif or .TIFF
	string filelist_tif=indexedfile(SLP_ImagePath,-1,".tif")
	string filelist_TIFF=indexedfile(SLP_ImagePath,-1,".TIFF")
	string filelist
	
	If (itemsinlist(filelist_tif)!=0)
		filelist=filelist_tif
	Else
		filelist=filelist_TIFF
	Endif
		
	filelist=sortlist(filelist)
	
	variable i=0
	variable N_images=itemsinlist(filelist)
	
	//Load the first image to check for the size
	imageload /Q/T=tiff /P=SLP_ImagePath stringfromlist(0,filelist)
	string ImageWaveName=stringfromlist(0,S_WaveNames)
	Wave SLP_ImgWave=$ImageWaveName
	string SLP_IntgName=VolName+"_Intg"
	
	make /O /N=(dimsize(SLP_ImgWave,0),dimsize(SLP_ImgWave,1),N_images) $VolName /WAVE=SLP_ImgVolume
	make /O /N=(dimsize(SLP_ImgWave,0),dimsize(SLP_ImgWave,1)) $SLP_IntgName /WAVE=SLP_ImgIntegrate
	SLP_ImgIntegrate=0
	killwaves SLP_ImgWave
	
	Printf "Loading "+VolName+".."
	
	for (i=0;i<itemsinlist(filelist);i+=1)
		
		imageload /Q/T=tiff /P=SLP_ImagePath stringfromlist(i,filelist)
		ImageWaveName=stringfromlist(0,S_WaveNames)
		Wave SLP_ImgWave=$ImageWaveName
		
		SLP_ImgVolume[][][i]=SLP_ImgWave[p][q]
		SLP_ImgIntegrate[][]+=SLP_ImgWave[p][q]
		
		killwaves SLP_ImgWave
		
		if ((i/50)-floor(i/50)==0)
			Printf ".."
		EndIf
	
	Endfor
	
	SLP_ImgIntegrate/=i //Average the intensity
	
	SetScale /P z,zStart,zStep,SLP_ImgVolume
	
	KillPath /Z SLP_ImagePath
	
	Print "Done"
	
End


Function SLP_IXPS_init()
	string Current_folder=getdatafolder(1)
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:ImgXPS
	NewDataFolder /O root:Package_SLP:ImgXPS:Settings
	
	SetDataFolder root:Package_SLP:ImgXPS
	
	//Global variables
	Variable /G FrameNum=0
	Variable /G ExtProgress=0
	Variable /G CorrAdj_x1=0
	Variable /G CorrAdj_y1=0
	Variable /G CorrAdj_mag1=1
	Variable /G CorrAdj_Size1=1
	Variable /G CorrAdj_Rot1=0
	Variable /G CorrAdj_x2=0
	Variable /G CorrAdj_y2=0
	Variable /G CorrAdj_mag2=1
	Variable /G CorrAdj_Size2=1
	Variable /G CorrAdj_Rot2=0
	Variable /G ColorMin=0
	Variable /G ColorMax=0
	Variable /G Threshold=50
	Variable /G LLim=-inf
	Variable /G ULim=inf
	Variable /G Iso_a1=0
	Variable /G Iso_b1=0
	Variable /G Iso_a2=0
	Variable /G Iso_b2=0
	Variable /G Iso_C=0
	Variable /G zProfBin=5
	Variable /G N_Peaks=1
	Variable /G Map_zBG_G=0
	String /G Message_Log
	
	//Procedure Settings
	SetDataFolder root:Package_SLP:ImgXPS:Settings
	Variable /G Max_N_Peaks=32
	Variable /G Default_Int=0
	Variable /G Default_Pos=0
	Variable /G Default_FWHM=1
	Variable /G Default_Mix=0.01
	Variable /G Default_As=0.01
	SetDataFolder root:Package_SLP:ImgXPS
	
	String /G SelSubWindow="SLP_ImgXPS_Panel_01#IX_ResultMap1"
	
	Make /O/T/N=(5,3) SLP_IXPS_XPSParamW
	SLP_IXPS_XPSParamW[0][0]="STV begin"
	SLP_IXPS_XPSParamW[1][0]="STV end"
	SLP_IXPS_XPSParamW[2][0]="STV step"
	SLP_IXPS_XPSParamW[3][0]="hv"
	SLP_IXPS_XPSParamW[4][0]="Analyser WF"
	SLP_IXPS_XPSParamW[][2]="eV"
	
	Make /O/N=(5,3) SLP_IXPS_XPSParamSelW
	SLP_IXPS_XPSParamSelW[][1]=2
	SLP_IXPS_XPSParamSelW[1][1]=0
	
	Make /T/O/N=(4,0) SLP_IXPS_FitParamW
	Make /O/N=(4,0) SLP_IXPS_FitParamSelW
	//SetDimLabel 1,0,ParName,SLP_IXPS_FitParamW
	//SetDimLabel 1,1,SaveResult,SLP_IXPS_FitParamW
	//SetDimLabel 1,2,Map1,SLP_IXPS_FitParamW
	//SetDimLabel 1,3,Map2,SLP_IXPS_FitParamW
	
	Make /O/N=(0,16) SLP_IXPS_ScanListDisplaySelW
	SLP_IXPS_ScanListDisplaySelW[][0]=32
	Make /O/T/N=(0,16) SLP_IXPS_ScanListDisplayW
	SetDimLabel 1,0,Sel,SLP_IXPS_ScanListDisplayW
	SetDimLabel 1,1,ScanName,SLP_IXPS_ScanListDisplayW
	SetDimLabel 1,2,Notes,SLP_IXPS_ScanListDisplayW
	
	Make /O/T/N=(0,64) SLP_IXPS_ScanListW
	SetDimLabel 1,0,ScanName,SLP_IXPS_ScanListW
	SetDimLabel 1,1,DataFolder,SLP_IXPS_ScanListW
	SetDimLabel 1,2,RawDataLoc,SLP_IXPS_ScanListW
	SetDimLabel 1,3,DateModified,SLP_IXPS_ScanListW
	SetDimLabel 1,4,DateCreate,SLP_IXPS_ScanListW
	SetDimLabel 1,5,SelFrame,SLP_IXPS_ScanListW
	SetDimLabel 1,6,MinInt,SLP_IXPS_ScanListW
	SetDimLabel 1,7,MaxInt,SLP_IXPS_ScanListW
	SetDimLabel 1,8,BG_Type,SLP_IXPS_ScanListW//Updated on 20180430
	SetDimLabel 1,9,FitMskLLim,SLP_IXPS_ScanListW
	SetDimLabel 1,10,FitMskULim,SLP_IXPS_ScanListW
	SetDimLabel 1,11,STV_St,SLP_IXPS_ScanListW
	SetDimLabel 1,12,STV_End,SLP_IXPS_ScanListW
	SetDimLabel 1,13,STV_Step,SLP_IXPS_ScanListW
	SetDimLabel 1,14,hv,SLP_IXPS_ScanListW
	SetDimLabel 1,15,AnalyserWF,SLP_IXPS_ScanListW
	SetDimLabel 1,16,ExtBin,SLP_IXPS_ScanListW//Bin used in extraction (//used to be MinColour11)
	SetDimLabel 1,17,FitMode,SLP_IXPS_ScanListW//Fit mode
	SetDimLabel 1,18,CorrDLLim,SLP_IXPS_ScanListW//For Corr
	SetDimLabel 1,19,CorrDULim,SLP_IXPS_ScanListW//For Corr
	SetDimLabel 1,20,CMapDLLim,SLP_IXPS_ScanListW//For CMap
	SetDimLabel 1,21,CMapDULim,SLP_IXPS_ScanListW//For CMap
	SetDimLabel 1,22,ParamSel1,SLP_IXPS_ScanListW//Parameter1 selection
	SetDimLabel 1,23,ParamSel2,SLP_IXPS_ScanListW//Parameter2 selection
	SetDimLabel 1,24,ParamSel3,SLP_IXPS_ScanListW//Parameter3 selection
	SetDimLabel 1,25,ParamSel4,SLP_IXPS_ScanListW//Parameter4 selection
	SetDimLabel 1,26,ParamSel5,SLP_IXPS_ScanListW//Parameter5 selection
	SetDimLabel 1,27,ParamSel6,SLP_IXPS_ScanListW//Parameter6 selection
	SetDimLabel 1,28,xMin,SLP_IXPS_ScanListW //Screen position
	SetDimLabel 1,29,xMax,SLP_IXPS_ScanListW //Screen position
	SetDimLabel 1,30,yMin,SLP_IXPS_ScanListW //Screen position
	SetDimLabel 1,31,yMax,SLP_IXPS_ScanListW //Screen position
	SetDimLabel 1,32,FOV,SLP_IXPS_ScanListW //FOV
	SetDimLabel 1,33,CorrW1,SLP_IXPS_ScanListW //Image wave FName for map1 correction
	SetDimLabel 1,34,DisplFit_Flg,SLP_IXPS_ScanListW //Flag  0 = Display GUESS peaks, Flag 1 = Display FIT results
	SetDimLabel 1,35,CorrAdj_x1,SLP_IXPS_ScanListW //Map correction parameters
	SetDimLabel 1,36,CorrAdj_y1,SLP_IXPS_ScanListW//Map correction parameters
	SetDimLabel 1,37,CorrAdj_mag1,SLP_IXPS_ScanListW//Map correction parameters
	SetDimLabel 1,38,CorrAdj_Size1,SLP_IXPS_ScanListW//Map correction parameters
	SetDimLabel 1,39,CorrAdj_Rot1,SLP_IXPS_ScanListW//Map correction parameters
	SetDimLabel 1,40,PeakAsgn_Flg,SLP_IXPS_ScanListW//Flag for peak assignment
	SetDimLabel 1,41,PeakAsgn_pos,SLP_IXPS_ScanListW//position (points) for peak assignment
	SetDimLabel 1,42,CursorP,SLP_IXPS_ScanListW//saved cursor position (p)
	SetDimLabel 1,43,CursorQ,SLP_IXPS_ScanListW//saved cursor position (q)
	SetDimLabel 1,44,BE_Display_Flg,SLP_IXPS_ScanListW //Display BE instead of KE (STV) in the x-axis of z-prof window
	SetDimLabel 1,45,RawDataRemoved_Flg,SLP_IXPS_ScanListW //Raw data has been removed (y/n)?
	SetDimLabel 1,46,Notes,SLP_IXPS_ScanListW //Notes
	SetDimLabel 1,47,SelectedSubWindow,SLP_IXPS_ScanListW //Sub window selection
	SetDimLabel 1,48,N_Peaks,SLP_IXPS_ScanListW //N_Peaks
	SetDimLabel 1,49,CorrPreset,SLP_IXPS_ScanListW //Auto correction preset
	SetDimLabel 1,50,CorrHistMin,SLP_IXPS_ScanListW //Histogram min for Corr
	SetDimLabel 1,51,CorrHistMax,SLP_IXPS_ScanListW //Histogram max for Corr
	SetDimLabel 1,52,CorrHistBin,SLP_IXPS_ScanListW //Histogram bin for Corr
	SetDimLabel 1,53,CMapHistMin,SLP_IXPS_ScanListW //Histogram min for CMap
	SetDimLabel 1,54,CMapHistBin,SLP_IXPS_ScanListW //Histogram max for CMap
	SetDimLabel 1,55,CMapHistBin,SLP_IXPS_ScanListW //Histogram bin for CMap
	SetDimLabel 1,56,CMapCsrFlg,SLP_IXPS_ScanListW //Cursor display flag for CMAP
	SetDimLabel 1,57,CMapCsr_p,SLP_IXPS_ScanListW //Cursor display p pos for CMAP
	SetDimLabel 1,58,CMapCsr_q,SLP_IXPS_ScanListW //Cursor display q pos for CMAP
	SetDimLabel 1,59,ExtDone_Flg,SLP_IXPS_ScanListW  //Indication that extraction has been done. [16.12.2019]
	//.... Up to 64..
	
	Make /O/N=(5,5) SLP_IXPS_DummyImg1
	Make /O/N=(5,5) SLP_IXPS_DummyImg2
	Make /O/N=(5,5) SLP_IXPS_DummyImg3
	Make /O/N=(5) SLP_IXPS_DummySpectrum
	
	Setdatafolder $Current_folder
	
	SLP_Util_Init()
End

Function SLP_IXPS_CreatePanel1() : Panel

	//Initialize IXPS procedures if it is the first time that this panel is used
	If (!DataFolderExists("root:Package_SLP:ImgXPS" ))
		SLP_IXPS_init()
		SLP_IXPS_MCorrInit()
	Endif
	//Global variables and Waves
	NVAR FrameNum=root:Package_SLP:ImgXPS:FrameNum
	NVAR ExtProgress=root:Package_SLP:ImgXPS:ExtProgress
	NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
	NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
	NVAR Threshold=root:Package_SLP:ImgXPS:Threshold
	NVAR LLim=root:Package_SLP:ImgXPS:LLim
	NVAR ULim=root:Package_SLP:ImgXPS:ULim
	SVAR PresetList=root:Package_SLP:ImgXPS:ManCorr:PresetList
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	Wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	Wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	Wave /T SLP_IXPS_XPSParamW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamW
	Wave SLP_IXPS_XPSParamSelW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamSelW
	Wave /T SLP_IXPS_FitParamW=root:Package_SLP:ImgXPS:SLP_IXPS_FitParamW
	Wave SLP_IXPS_FitParamSelW=root:Package_SLP:ImgXPS:SLP_IXPS_FitParamSelW
	
	DoWindow /K SLP_ImgXPS_Panel_01
	PauseUpdate; Silent 1		// building window...

	//Constants for positions
	Variable Ctrl_xPos0=10
	Variable Img_xPos=480
	Variable Img_yPos=20
	Variable Img_xSize=130
	Variable Img_ySize=100
	Variable Img_xOffset=10
	Variable Img_yOffset=20
	Variable Img_TitleOffset=15
	Variable Img_xPos1=Img_xPos+0*(Img_xSize+Img_xOffset)
	Variable Img_xPos2=Img_xPos+1*(Img_xSize+Img_xOffset)
	Variable Img_xPos3=Img_xPos+2*(Img_xSize+Img_xOffset)
	Variable Img_yPos1=Img_yPos+0*(Img_ySize+Img_yOffset)
	Variable Img_yPos2=Img_yPos+1*(Img_ySize+Img_yOffset)
	Variable Img_yPos3=Img_yPos+2*(Img_ySize+Img_yOffset)
	Variable Img_yPos4=Img_yPos+3*(Img_ySize+Img_yOffset)

	//CREATE PANEL
	NewPanel /W=(200,70,1100,770) /N=SLP_ImgXPS_Panel_01
	SetDrawLayer UserBack
	//Annotations and decoration
	SetDrawEnv fsize= 15;DelayUpdate;DrawText Ctrl_xPos0,30,"Imaging XPS data extraction"
	SetDrawEnv fsize= 10;DrawText 475,565,"XPS parameters"
	SetDrawEnv fsize= 10;DrawText 620,487,"Histogram"
	SetDrawEnv fsize= 10;DrawText 620,645,"Min"
	SetDrawEnv fsize= 10;DrawText 620,660,"Max"
	SetDrawEnv fsize= 10;DrawText Img_xPos1,Img_yPos4-6,"Isochromaticity correction"
	SetDrawEnv fSize=12; DrawText 10,54,"Rawdata"
	SetDrawEnv fSize=12; DrawText 237,23,"Scan list"
	SetDrawEnv fSize=11; DrawText 346,231,"Move:"
	SetDrawEnv fillfgc= (2,39321,1);DrawRect 237,239,465,310
	SetDrawEnv textrgb= (65535,65535,65535),fSize=12; DrawText 242,256,"Screen mask"
	SetDrawEnv textrgb= (65535,65535,65535),fSize=11; DrawText 242,272,"Auto:"
	SetDrawEnv textrgb= (65535,65535,65535),fSize=11; DrawText 242,288,"Manual:"
	SetDrawEnv textrgb= (65535,65535,65535),fSize=11; DrawText 242,306,"Copy:"
	
	//DataList and ImageVol section
	//ImgVol plot
	Display/W=(8,93,230,315)/HOST=SLP_ImgXPS_Panel_01  /N=IX_ImgW 
	//SetAxis /W=SLP_ImgXPS_Panel_01#IX_ImgW /A/R left
	//slider
	SetVariable SetVar_FrameNum,pos={122,38},size={99,16},proc=SetVarProc_IXPS_ImgFrame,title="Frame no."
	SetVariable SetVar_FrameNum,fSize=10,value= root:Package_SLP:ImgXPS:FrameNum
	Slider Slider_ImgVolFrame,pos={11,59},size={207,13},proc=SliderProc_IXPS_ImgFrame
	Slider Slider_ImgVolFrame,limits={0,2,1},variable= root:Package_SLP:ImgXPS:FrameNum,side= 0,vert= 0,ticks= 0
	Button Button_AutoContrast,pos={10,75},size={75,16},proc=ButtonProc_IXPS_AutoContrast,title="Auto contrast"
	Button Button_AutoContrast,fSize=10
	CheckBox Check_zProfile,pos={147,75},size={72,15},proc=CheckProc_IXPS_zProfile,title="See z-profile"
	CheckBox Check_zProfile,value= 0
	Button Button_ReScale,pos={87,75},size={55,16},proc=ButtonProc_IXPS,title="Rescale"
	Button Button_ReScale,fSize=10
	//scanlist
	Button Button_LoadScan,pos={394,7},size={70,16},proc=ButtonProc_IXPS_LoadScan,title="Load scan.."
	Button Button_LoadScan,fSize=10
	ListBox List_ScansList,pos={237,26},size={226,152},proc=ListBoxProc_IXPS_ScanList
	ListBox List_ScansList,listWave=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	ListBox List_ScansList,selWave=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	ListBox List_ScansList,selRow= 0,mode=2 //Can select only one row
	ListBox List_ScansList,widths={20,70,250,0,0,0,0,0,0,0,0,0,0,0,0,0}
	ListBox List_ScansList,userColumnResize= 1
	Button Button_SelAll,pos={238,180},size={60,16},fSize=10,proc=ButtonProc_IXPS_SelAll,title="Select all"
	Button Button_SelNone,pos={299,180},size={70,16},fSize=10,proc=ButtonProc_IXPS_SelNone,title="Select none"
	Button Button_DelScan,pos={238,216},size={80,16},fSize=10,proc=ButtonProc_IXPS_DelDataSet,title="Delete scan(s)"
	Button Button_RmRaw,pos={238,198},size={100,16},fSize=10,proc=ButtonProc_IXPS_DelRawData,title="Remove raw data"
	Button Button_ResRaw,pos={340,198},size={100,16},fSize=10,proc=ButtonProc_IXPS_RestoreRawData,title="Restore raw data"
	Button Button_MoveUp,pos={381,217},size={40,16},fSize=10,proc=ButtonProc_IXPS,title="Up"
	Button Button_MoveDown,pos={424,217},size={40,16},fSize=10,proc=ButtonProc_IXPS,title="Down"
	Button Button_SelMulti,pos={371,180},size={100,16},fSize=10,proc=ButtonProc_IXPS,title="Select multi"
	//Screen mask
	Button Button_CreateMask,pos={387,256},size={75,16},fSize=10,proc=ButtonProc_IXPS_CreateScrnMask,title="Create mask"
	SetVariable SetVar_Threshold,pos={282,255},size={108,16},title="Threshold:"
	SetVariable SetVar_Threshold,fSize=10
	SetVariable SetVar_Threshold,limits={0,inf,1},value= root:Package_SLP:ImgXPS:Threshold
	Button Button_ChooseScrnMsk,pos={283,292},size={179,16},fSize=10,proc=ButtonProc_IXPS_CopyScrn,title="Copy screen mask from.."
	Button button_DrawROI,pos={292,274},size={95,16},fSize=10,proc=ButtonProc_IXPS_ScrnMskDraw,title="Draw ROI"
	Button Button_CreateROI,pos={387,273},size={75,16},fSize=10,proc=ButtonProc_IXPS_ScrnMskCreate,title="Create mask"

	AppendImage /W=SLP_ImgXPS_Panel_01#IX_ImgW root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_ImgW tick=3,noLabel=2,standoff=0
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_ImgW margin(left)=5,margin(bottom)=5,margin(top)=5,margin(right)=5
	
	//FIT PARAM SECTION//////////////////////////////////////////
	//POPUP for fit function//
	PopupMenu Popup_FitType,pos={10,320},size={238,20},bodyWidth=180,proc=PopMenuProc_IXPS_FitSel,title="Fit mode:"
	PopupMenu Popup_FitType,fSize=12
	PopupMenu Popup_FitType,mode=1,value= #"\"Secondary yield cut-off;LEEM cut-off;Reverse GLAs Peaks (XPS);GLAs Peaks (NEXAFS)\""
	PopupMenu Popup_FitType,popvalue="Secondary yield cut-off"
	PopupMenu popup_BG_Type,pos={262,320},size={124,20},bodyWidth=70,proc=PopMenuProc_IXPS_BG_Type,title="Background"
	PopupMenu popup_BG_Type,mode=3,popvalue="Slope",value= #"\"None;Flat;Slope;Erf;atan;Shirley;Linear\""	
	SetVariable setvar_N_Peaks,pos={392,322},size={70,15},proc=SetVarProc_IXPS_N_Peaks,title="Peaks"
	SetVariable setvar_N_Peaks,limits={1,32,1},value= root:Package_SLP:ImgXPS:N_Peaks
	////////////////////////////////////////////////////////////
	ListBox List_FitParam,pos={10,344},size={450,113},ListWave=SLP_IXPS_FitParamW,SelWave=SLP_IXPS_FitParamSelW
	ListBox List_FitParam widths={22, 22, 75, 40,40, 27,36, 36,20, 20, 40,40, 1, 1, 1},userColumnResize=1,proc=ListBoxProc_IXPS_ParamList
	//Column: Ext-K-Param-Value-Guess-Hold-LLim-ULim-Disp-Corr-DLLim-DULim
	////////////////////////////////////////////////////////////
	SetVariable SetVar_LLim,pos={128,465},size={70,15},proc=SetVarProc_IXPS_FitLim,title="LLim"
	SetVariable SetVar_LLim,limits={-inf,inf,0.1},value= root:Package_SLP:ImgXPS:LLim
	SetVariable SetVar_ULim,pos={211,465},size={70,15},proc=SetVarProc_IXPS_FitLim,title="ULim"
	SetVariable SetVar_ULim,limits={-inf,inf,0.1},value= root:Package_SLP:ImgXPS:ULim
	CheckBox CheckBox_FastExt,pos={285,466},size={69,15},title="Fast mode"
	CheckBox CheckBox_FastExt,fSize=10,value= 0
	Button Button_ExtMap1,pos={363,463},size={96,20},proc=ButtonProc_IXPS_Ext1,title="Extract.."
	Button Button_ExtMap1,fSize=12,fColor=(65535,65535,65535)
	////////////////////////////////////////////////////////////
	Display/W=(Ctrl_xPos0,485,Ctrl_xPos0+450,670)/HOST=SLP_ImgXPS_Panel_01 /N=IX_FittingWin
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin margin(left)=37,margin(top)=6,margin(right)=37, margin(bottom)=34
	////////////////////////////////////////////////////////////
	CheckBox CheckBox_BE,pos={14,680},size={84,15},proc=CheckProc_IXPS_BE,title="B.E. for x-axis"
	CheckBox CheckBox_BE,fSize=10,value= 0
	CheckBox CheckBox_PeakAssign1,pos={120,680},size={104,15},proc=CheckProc_IXPS_DispPeakAssign,title="Peak assignments"
	CheckBox CheckBox_PeakAssign1,fSize=10,value= 0
	Button Button_Zoom2Mask,pos={231,680},size={90,16},fSize=10,proc=ButtonProc_IXPS_Zoom2Mask,title="Zoom to mask"
	Button Button_FullZoom,pos={322,680},size={35,16},fSize=10,proc=ButtonProc_IXPS_FullZoom,title="Full"
	Button Button_ExportzProf,pos={370,680},size={90,16},fSize=10,proc=ButtonProc_IXPS_ExportZProf,title="Export z-profile"
	////////////////////////////////////////////////////////////
	
	Button Button_ChangeHistogram,pos={478,491},size={120,16},proc=ButtonProc_IXPS,title="Histogram.."
	Button Button_ChangeHistogram,fSize=9

	SetVariable SetVar_ExtProgress,pos={475,678},size={392,16},title="Message log:"
	SetVariable SetVar_ExtProgress,fSize=10,format="%d"
	SetVariable SetVar_ExtProgress,limits={-inf,inf,0},value=root:Package_SLP:ImgXPS:Message_Log,noedit= 1

	////////////////////////////////////////////////////////
	//XPS Param
	ListBox List_XPSParam,pos={475,565},size={130,80},ListWave=SLP_IXPS_XPSParamW,SelWave=SLP_IXPS_XPSParamSelW
	ListBox List_XPSParam,proc=ListBoxProc_IXPS_XPSParam
	
	//Hisogram
	Display/W=(615,490,880,625)/HOST=SLP_ImgXPS_Panel_01 /N=IX_Histogram
	
	Slider Slider_ImgVolMinInt,pos={640,630},size={145,16},variable=ColorMin,proc=SliderProc_IXPS_CScale
	Slider Slider_ImgVolMinInt,limits={0,2,1},side= 2,vert= 0,ticks= 0
	Slider Slider_ImgVolMaxInt,pos={640,650},size={145,16},variable=ColorMax,proc=SliderProc_IXPS_CScale
	Slider Slider_ImgVolMaxInt,limits={0,2,1},side= 2,vert= 0,ticks= 0
	
	SetVariable SetVar_MinInt,pos={790,630},size={40,16},fsize=8,variable=ColorMin,proc=SetVarProc_CScale,title=" ",limits={-inf,inf,0.02},format="%.3f"//,noedit=1
	SetVariable SetVar_MaxInt,pos={790,650},size={40,16},fsize=8,variable=ColorMax,proc=SetVarProc_CScale,title=" ",limits={-inf,inf,0.02},format="%.3f"//,noedit=1
	///////////////////////////////////////////////////////
	CheckBox CheckBox_SelImg1,pos={Img_xPos1,Img_yPos1-Img_TitleOffset},size={100,14},fsize=9,title="Param1",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImg2,pos={Img_xPos2,Img_yPos1-Img_TitleOffset},size={100,14},fsize=9,title="Param2",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImg3,pos={Img_xPos3,Img_yPos1-Img_TitleOffset},size={100,14},fsize=9,title="Param3",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImg4,pos={Img_xPos1,Img_yPos2-Img_TitleOffset},size={100,14},fsize=9,title="Param4",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImg5,pos={Img_xPos2,Img_yPos2-Img_TitleOffset},size={100,14},fsize=9,title="Param5",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImg6,pos={Img_xPos3,Img_yPos2-Img_TitleOffset},size={100,14},fsize=9,title="Param6",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImgCorr,pos={Img_xPos1,Img_yPos3-Img_TitleOffset},size={100,14},fsize=9,title="Correction",mode=1,proc=CheckProc_IXPS_SelImage
	CheckBox CheckBox_SelImgCMap,pos={Img_xPos2,Img_yPos3-Img_TitleOffset},size={100,14},fsize=9,title="Corrected map",mode=1,proc=CheckProc_IXPS_SelImage
	
	Button Button_CopyParam,pos={11,461},size={109,20},fSize=10,proc=ButtonProc_IXPS_CopyFitCoef,title="Copy guess from.."
	Button Button_ExportHist,pos={479,527},size={120,16},fSize=9,proc=ButtonProc_IXPS,title="Export histogram"
	Button Button_Done,pos={828,645},size={50,16},title="Done",fSize=10,proc=ButtonProc_IXPS_Done
	////////////////////////////////////////////////////
	variable Isochrome_yPos=Img_yPos4+60
	
	PopupMenu popup_CorrectionPreset,pos={486,383},size={101,20},title="Preset"
	PopupMenu popup_CorrectionPreset,mode=1,popvalue="--",value= #PresetList,proc=PopMenuProc_IXPS_ManCorrPreset
	Button Button_AutoCorr,pos={479,408},size={120,16},fSize=9,proc=ButtonProc_IXPS_Correction,title="Auto correct"
	Button Button_ManualCorr,pos={479,428},size={120,16},fSize=9,proc=ButtonProc_IXPS_Correction,title="Manually adjust"
	Button Button_AutoColor,pos={479,509},size={120,16},fSize=9,proc=ButtonProc_IXPS,title="Auto color"

	CheckBox Check_CMapCsr,pos={831,243},size={46,15},proc=CheckProc_IXPS,title="Cursor"
	///////////////////////////////////////////////////
	//Added on 16.12.2019
	//EXPORT FIT SEQUENCE AND CRATED AREA MAP
	Button Button_ExpFitSequence,pos={479,450},size={120,16},proc=ButtonProc_IXPS,title="Export fit sequence.."
	Button Button_ExpFitSequence,fSize=9,fColor=(65535,43690,0),disable=1
	Button Button_ExpPeakArea,pos={479,468},size={120,16},proc=ButtonProc_IXPS,title="Create area maps"
	Button Button_ExpPeakArea,fSize=9,fColor=(65535,43690,0),disable=1
	
	/////
	
	Button Button_PlotUMap1,pos={Img_xPos1+90,Img_yPos1-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg
	Button Button_PlotUMap2,pos={Img_xPos2+90,Img_yPos1-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg
	Button Button_PlotUMap3,pos={Img_xPos3+90,Img_yPos1-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg
	Button Button_PlotUMap4,pos={Img_xPos1+90,Img_yPos2-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg
	Button Button_PlotUMap5,pos={Img_xPos2+90,Img_yPos2-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg
	Button Button_PlotUMap6,pos={Img_xPos3+90,Img_yPos2-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg

	Button Button_ChooseCor1,pos={Img_xPos1+80,Img_yPos3-16},size={50,16},title="Choose",fSize=9,proc=ButtonProc_IXPS_ChooseCor1W
	Button Button_PlotCMap1,pos={Img_xPos2+90,Img_yPos3-16},size={40,16},title="Plot",fSize=9,proc=ButtonProc_IXPS_PlotImg

	Display/W=(Img_xPos1,Img_yPos1,Img_xPos1+Img_xSize,Img_yPos1+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_RawExt1
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_RawExt1 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_RawExt1 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_RawExt1 /A/R left
	
	Display/W=(Img_xPos2,Img_yPos1,Img_xPos2+Img_xSize,Img_yPos1+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_RawExt2
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_RawExt2 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_RawExt2 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_RawExt2 /A/R left
		
	Display/W=(Img_xPos3,Img_yPos1,Img_xPos3+Img_xSize,Img_yPos1+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_RawExt3
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_RawExt3 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_RawExt3 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_RawExt3 /A/R left
	
	Display/W=(Img_xPos1,Img_yPos2,Img_xPos1+Img_xSize,Img_yPos2+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_RawExt4
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_RawExt4 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_RawExt4 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_RawExt4 /A/R left
	
	Display/W=(Img_xPos2,Img_yPos2,Img_xPos2+Img_xSize,Img_yPos2+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_RawExt5
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_RawExt5 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_RawExt5 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_RawExt5 /A/R left
	
	Display/W=(Img_xPos3,Img_yPos2,Img_xPos3+Img_xSize,Img_yPos2+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_RawExt6
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_RawExt6 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_RawExt6 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_RawExt6 /A/R left
	
	Display/W=(Img_xPos1,Img_yPos3,Img_xPos1+Img_xSize,Img_yPos3+Img_ySize)/HOST=SLP_ImgXPS_Panel_01 /N=IX_Correction1
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_Correction1 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_Correction1 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_Correction1 /A/R left
	
	Display/W=(Img_xPos2,Img_yPos3,Img_xPos2+Img_xSize*2,Img_yPos3+Img_ySize*2)/HOST=SLP_ImgXPS_Panel_01 /N=IX_ResultMap1
	AppendImage /W=SLP_ImgXPS_Panel_01#IX_ResultMap1 root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1
	ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_ResultMap1 tick=3,noLabel=2,standoff=0,margin=5
	SetAxis /W=SLP_ImgXPS_Panel_01#IX_ResultMap1 /A/R left
	
	If (DimSize(SLP_IXPS_ScanListW,0)) //If there is already loaded data, display the first one
		SLP_IXPS_DisplaySelectedData(SLP_IXPS_ScanListW[0][0])
	EndIf
	
	//AssignHookFunction (SLP_IXPS_CursorHook)
	setwindow SLP_ImgXPS_Panel_01,hook(zProfileUpdate)=SLP_IXPS_CursorHook//,hookevents=4	
	
	//Colorize
	modifypanel /W=SLP_ImgXPS_Panel_01 cbRGB=(30000,50000,35000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RAWEXT1 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RAWEXT2 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RAWEXT3 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RAWEXT4 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RAWEXT5 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RAWEXT6 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_CORRECTION1 wbRGB=(17500,40000,32000)
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_RESULTMAP1 wbRGB=(17500,40000,32000)
End

Function ButtonProc_IXPS_LoadScan(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			//Ask for folder location
			GetFileFolderInfo /D/Q/Z=2 //[Note] /Z=2 prevent dialog when user click 'Cancel'
			
			If (V_Flag!=-1) //IF user select a folder
				NewPath DataPath,S_Path
				wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
				variable zStart
				variable zStep
				variable FOV=0
				String FOV_Txt=""
				variable V_Flag1
				variable V_Flag2
				NVAR Threshold=root:Package_SLP:ImgXPS:Threshold
				
				//Auto assign VolName to the folder name
				String VolName=StringFromList(ItemsInList(S_Path,":")-1,S_Path,":") //Suggested name = (data-containing) folder name
				VolName=SLP_Util_WNameSuggest(VolName,0,20) //[FUNC]SLP_Util_WNameSuggest
				
				//Automatic search for parameter from the text file
				string FileList1=indexedfile(DataPath,-1,".txt")
				//If .txt file is found..
				If (Strlen(FileList1)) 
					String ParamFile_Name=stringfromlist(0,indexedfile(DataPath,-1,".txt"),";")
					String ParamFile_FName=S_Path+ParamFile_Name
					string ParamList=SLP_Util_ExtScanParam(File_FName=ParamFile_FName)
					zStart=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Start")),":"))
					zStep=str2num(stringfromlist(1,stringfromlist(0,grepList(ParamList,"STV Step")),":"))
					FOV_Txt=stringfromlist(1,stringfromlist(0,grepList(ParamList,"Field of View")),":")
					FOV=SLP_Util_FOVExtraction(FOV_Txt)
				EndIf
						
				//Prompt for Wavename and other parameters
				Do
					Prompt VolName, "Wave name"
					prompt zStart, "Start voltage begin (eV)"
					prompt zStep, "Start voltage step (eV)"
					prompt FOV,"Field of view (microns)"
					DoPrompt "Enter parameters", VolName,zStart,zStep,FOV
					V_Flag1=V_Flag //Need to copy V_Flag from DoPrompt to V_Flag1 before it is overwritten by DoAlert
					V_Flag2=0
					
					FindValue /TEXT=VolName SLP_IXPS_ScanListW
					
					If (V_Value==-1)
						//Prevent user from using non-standard wave names
						If (SLP_Util_WNameCheck(VolName,20)&&!V_Flag1) //[FUNC]SLP_Util_WNameCheck
							DoAlert 0,"Scan name must be\r- No special characters\r- Starts with an alphabet\r- Less than 20 chars."
							//Limit to 20 characters because the procedure will create processed data waves with description tags (_xxx) added to the ScanName.
						Endif
					Else
						DoAlert 0,"Duplicated scan name"
						V_Flag2=1
					Endif
					
					//Check if the data folder is already exist or not
					If (datafolderexists(VolName))
						DoAlert 0,"Duplicate data folder name. Please choose a new scan name"
					Endif
					
					
					If (FOV==0)
						DoAlert 0,"Please enter the field of view (FOV)"
					EndIf
					
				While (((SLP_Util_WNameCheck(VolName,20)||V_Flag2)&&!V_Flag1)||datafolderexists(VolName)||(FOV==0)) //Loope until user makes a good name or click Cancel
				//[FUNC]SLP_Util_WNameCheck
				
				If (!V_Flag1) //User click continue
					SVAR Message_Log=root:Package_SLP:ImgXPS:Message_Log
					Message_Log="Loading .."
					DoUpdate
					string CurrentFolder=GetDataFolder(1)
					
					string PkgFolder_FName="root:Package_SLP:ImgXPS:"+VolName
					NewDataFolder $PkgFolder_FName //Location in Pkg Folder to store scan parameters
					//NewDataFolder $VolName
					SetDataFolder $PkgFolder_FName //Save raw data here
					
					//Load series of images to a 3d volume [CODE:SLP_Util_LoadMultImg2Vol]
					SLP_Util_LoadMultImg2Vol(S_Path,VolName,zStart,zStep)
					
					string NewImgVolW_FName=PkgFolder_FName+":"+VolName 
					Wave NewImgVolW=$NewImgVolW_FName
					
					//Guess the threshold
					String ImgIntgW_FName=NewImgVolW_FName+"_Intg"
					Wave ImgIntgW=$ImgIntgW_FName
					Variable Screen_GssInt=ImgIntgW[floor(dimsize(ImgIntgW,0)/2)][floor(dimsize(ImgIntgW,1)/2)] //Intensity of image at the center
					Variable BG_GssInt=ImgIntgW[0][0] //Intensity of image at the top-left cornor
					Threshold=BG_GssInt+(Screen_GssInt-BG_GssInt)/10 
					
					//Find no. of step
					variable N_Steps=dimsize(NewImgVolW,2)
					variable ImgVolWidth=dimsize(NewImgVolW,0)
					variable ImgVolHeight=dimsize(NewImgVolW,1)
					
					wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
					wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
					
					variable N_Scans=Dimsize(SLP_IXPS_ScanListW,0)
					redimension /N=(dimsize(SLP_IXPS_ScanListW,0)+1,dimsize(SLP_IXPS_ScanListW,1)) SLP_IXPS_ScanListW
					redimension /N=(dimsize(SLP_IXPS_ScanListDisplayW,0)+1,dimsize(SLP_IXPS_ScanListDisplayW,1)) SLP_IXPS_ScanListDisplayW
					redimension /N=(dimsize(SLP_IXPS_ScanListDisplaySelW,0)+1,dimsize(SLP_IXPS_ScanListDisplaySelW,1)) SLP_IXPS_ScanListDisplaySelW
					
					wave /T SLP_IXPS_XPSParamW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamW
					//Create zProfile wave
					String ZProfW_FName=NewImgVolW_FName+"_zProfl"
					String ZProfMskW_FName=NewImgVolW_FName+"_zPMsk"
					String GssW_FName=NewImgVolW_FName+"_Gss"

					
					Make /O $ZProfW_FName /WAVE=ZProfW
					//Make /O $ZProfMskW_FName
					
//					Variable ImgQ25=SLP_Util_FindImgMedian(ImgIntgW_FName,1)
//					Variable ImgQ75=SLP_Util_FindImgMedian(ImgIntgW_FName,2)
//					WaveStats /Q NewImgVolW
//					variable IntMin=ImgQ25
//					variable IntMax=ImgQ75
					
					WaveStats /Q NewImgVolW
					variable IntMin=V_avg-V_sdev*2
					variable IntMax=V_avg+V_sdev*2
					
					//Initialize the parameters in ScanListW
					SLP_IXPS_ScanListW[N_Scans][0]=VolName //Name of the scan (= wave name)
					SLP_IXPS_ScanListW[N_Scans][1]=PkgFolder_FName+":" //Where the Raw file is saved
					SLP_IXPS_ScanListW[N_Scans][2]=S_Path //The raw data directory on the computer
					SLP_IXPS_ScanListW[N_Scans][3]=secs2date(V_modificationDate,2)+" "+secs2time(V_modificationDate,2)
					SLP_IXPS_ScanListW[N_Scans][4]=secs2date(V_creationDate,2)+" "+secs2time(V_creationDate,2)
					SLP_IXPS_ScanListW[N_Scans][5]="0" //SelFrame
					
					SLP_IXPS_ScanListW[N_Scans][6]=num2str(IntMin)//For auto. ctab setting
					SLP_IXPS_ScanListW[N_Scans][7]=num2str(IntMax)//For auto. ctab setting
					
					SLP_IXPS_ScanListW[N_Scans][8]="None" //BG
					
					SLP_IXPS_ScanListW[N_Scans][9]="-inf"
					SLP_IXPS_ScanListW[N_Scans][10]="inf"
					
					SLP_IXPS_ScanListW[N_Scans][11]=num2str(zStart)
					SLP_IXPS_ScanListW[N_Scans][12]=num2str(zStart+(N_steps-1)*zStep)
					SLP_IXPS_ScanListW[N_Scans][13]=num2str(zStep)
					
					SLP_IXPS_ScanListW[N_Scans][16]="10" //ExtBin
					
					SLP_IXPS_ScanListW[N_Scans][17]="Secondary yield cut-off" //FitMode
					
					SLP_IXPS_ScanListW[N_Scans][18]="" //CorrDLLim
					SLP_IXPS_ScanListW[N_Scans][19]="" //CorrDULim
					SLP_IXPS_ScanListW[N_Scans][20]="" //CMapDLLim
					SLP_IXPS_ScanListW[N_Scans][21]="" //CMapDLLim
					
//					SLP_IXPS_ScanListW[N_Scans][22]="" //Param name 1-6
//					SLP_IXPS_ScanListW[N_Scans][23]=""
//					SLP_IXPS_ScanListW[N_Scans][24]=""
//					SLP_IXPS_ScanListW[N_Scans][25]=""
//					SLP_IXPS_ScanListW[N_Scans][26]=""
//					SLP_IXPS_ScanListW[N_Scans][27]=""

					SLP_IXPS_ScanListW[N_Scans][28]="0" //pMin (Screen mask)
					SLP_IXPS_ScanListW[N_Scans][29]=num2str(dimsize(NewImgVolW,0)) //pMax (Screen mask)
					SLP_IXPS_ScanListW[N_Scans][30]="0" //qMin (Screen mask)
					SLP_IXPS_ScanListW[N_Scans][31]=num2str(dimsize(NewImgVolW,1)) //qMax (Screen mask)
					
					SLP_IXPS_ScanListW[N_Scans][32]=num2str(FOV)

//					SLP_IXPS_ScanListW[N_Scans][33]="" //??
					
					SLP_IXPS_ScanListW[N_Scans][34]="0" //Fit flag
					
					SLP_IXPS_ScanListW[N_Scans][35]="0" //Corr Adjust 
					SLP_IXPS_ScanListW[N_Scans][36]="0"
					SLP_IXPS_ScanListW[N_Scans][37]="1"
					SLP_IXPS_ScanListW[N_Scans][38]="1"
					SLP_IXPS_ScanListW[N_Scans][39]="0"
					SLP_IXPS_ScanListW[N_Scans][40]="0"
					
					SLP_IXPS_ScanListW[N_Scans][42]=num2str(floor(ImgVolWidth/2)) //Image cursor positions (p)
					SLP_IXPS_ScanListW[N_Scans][43]=num2str(floor(ImgVolHeight/2)) //Image cursor positions (q)
					
					SLP_IXPS_ScanListW[N_Scans][44]="0"
					
					SLP_IXPS_ScanListW[N_Scans][45]="0" //Raw data removed Flg.
					
					SLP_IXPS_ScanListW[N_Scans][46]="" //Notes
					
					SLP_IXPS_ScanListW[N_Scans][47]="SLP_ImgXPS_Panel_01#IX_RawExt1" //Selected subwindow
					
					SLP_IXPS_ScanListW[N_Scans][56]="0"
					SLP_IXPS_ScanListW[N_Scans][57]="0"
					SLP_IXPS_ScanListW[N_Scans][58]="0"
					
					SLP_IXPS_ScanListDisplayW[N_Scans][1]=VolName
					SLP_IXPS_ScanListDisplaySelW[N_Scans][0]=32
					SLP_IXPS_ScanListDisplaySelW[N_Scans][2]=2
					
					SLP_IXPS_XPSParamW[0][1]=num2str(zStart)
					SLP_IXPS_XPSParamW[1][1]=num2str(zStart+(N_steps-1)*zStep)
					SLP_IXPS_XPSParamW[2][1]=num2str(zStep)
					
					//Make selection in the ScanList
					ListBox List_ScansList win=SLP_ImgXPS_Panel_01, SelRow=dimsize(SLP_IXPS_ScanListW,0)-1
					
					//Create a z-profile in the center
					SLP_IXPS_ExtractZProfile(VolName,round(dimsize(NewImgVolW,0)/2),round(dimsize(NewImgVolW,1)/2),30) //[FUNC]SLP_IXPS_ExtractZProfile
					
					//Create Dummy GssW
					duplicate /O $ZProfW_FName ,$GssW_FName /Wave=GssW
					GssW=0

					//Create a Mask Wave
					duplicate /O $ZProfW_FName,$ZProfMskW_FName /WAVE=ZProfMskW
					//Auto set the Fit LLim and ULim with the scan range
					NVAR LLim=root:Package_SLP:ImgXPS:LLim
					NVAR ULim=root:Package_SLP:ImgXPS:ULim
					LLim=dimoffset(ZProfW,0)
					ULim=dimoffset(ZProfW,0)+dimdelta(ZProfW,0)*(dimsize(ZprofW,0)-1)
					ZProfMskW=0
					ZProfMskW[round(x2pnt(ZProfMskW,Llim)),round(x2pnt(ZProfMskW,ULim))]=1
					
					SLP_IXPS_ScanListW[N_Scans][9]=Num2str(LLim)
					SLP_IXPS_ScanListW[N_Scans][10]=Num2str(ULim)		
					
					//Make selection of the Fit Mode
					SLP_IXPS_FitInit(VolName,"Secondary yield cut-off") //[FUNC]SLP_IXPS_FitInit
					PopupMenu Popup_FitType ,win=SLP_ImgXPS_Panel_01,mode=1
					SLP_IXPS_ScanListW[N_Scans][48]="1"
					
					//Create screen mask
					SLP_IXPS_CreateScreenMask(VolName,Threshold,1000) //[FUNC]SLP_IXPS_CreateScreenMask
					
					//Display the new image volume
					SLP_IXPS_DisplaySelectedData(NewImgVolW_FName) //[FUNC]SLP_IXPS_DisplaySelectedData
					
					//Create UMap1 (dummy)
					string UMap1W_FName=NewImgVolW_FName+"_UMap1"
					duplicate /O root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1,$UMap1W_FName
					
					//Selected frame number = 0
					NVAR FrameNum=root:Package_SLP:ImgXPS:FrameNum
					FrameNum=0
					
					//Wave to save the guess value for MultiGLAs				
					NVAR Max_N_Peaks=root:Package_SLP:ImgXPS:Settings:Max_N_Peaks
					NVAR Default_Int=root:Package_SLP:ImgXPS:Settings:Default_Int
					NVAR Default_Pos=root:Package_SLP:ImgXPS:Settings:Default_Pos
					NVAR Default_FWHM=root:Package_SLP:ImgXPS:Settings:Default_FWHM
					NVAR Default_Mix=root:Package_SLP:ImgXPS:Settings:Default_Mix
					NVAR Default_As=root:Package_SLP:ImgXPS:Settings:Default_As
					Make /O /N=(5*Max_N_Peaks) $(VolName+"_GLAParamGss") /Wave=GLAParamGssW
					Variable i=0
					For (i=0;i<Max_N_Peaks;i+=5)
						GLAParamGssW[i]={Default_Int,Default_Pos,Default_FWHM,Default_Mix,Default_As}
					EndFor
					
					//Use for saving GLA parameters so that user don't need to re-enter the values when they change N_Peaks or BG_Type
									
					SetDataFolder CurrentFolder
					SLP_Util_PlayAlert()
					Message_Log="Data loading finished"	
				EndIf
				
				Killpath DataPath
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_DisplaySelectedData(VolName)
	String VolName
	Variable DataRow=SLP_IXPS_FindDataRow(VolName)
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	Wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	Wave /T SLP_IXPS_XPSParamW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamW
	String ImgVolW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
	String ImgIntgW_FName=ImgVolW_FName+"_Intg"
	String BxW_FName=ImgVolW_FName+"_BX"
	String ByW_FName=ImgVolW_FName+"_BY"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"
	String Corr1_FName=ImgVolW_FName+"_Corr1"
	String Corr1H_FName=ImgVolW_FName+"_Corr1H"
	String CMap1_FName=ImgVolW_FName+"_CMap1"
	String CMap1H_FName=ImgVolW_FName+"_CMap1H"
	String zProflW_FName=ImgVolW_FName+"_zProfl"
	String zPMskW_FName=ImgVolW_FName+"_zPMsk"
	String zProflFitW_FName=ImgVolW_FName+"_zProflFit"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String ZProfBEW_FName=ImgVolW_FName+"_zProflBE"
	String ZProfMskBEW_FName=ImgVolW_FName+"_zPMskBE" 
	String zProflFitBEW_FName=zProflFitW_FName+"BE"
	String GssCompW_FName=""
	String FitCompW_FName=""
	String GssBGW_FName=ImgVolW_FName+"_GssBG"
	String FitBGW_FName=ImgVolW_FName+"_fBg"
	String GssW_FName=ImgVolW_FName+"_Gss"
	
	NVAR FrameNum=root:Package_SLP:ImgXPS:FrameNum
	SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow
	NVAR CorrAdj_x1=root:Package_SLP:ImgXPS:CorrAdj_x1
	NVAR CorrAdj_y1=root:Package_SLP:ImgXPS:CorrAdj_y1
	NVAR CorrAdj_mag1=root:Package_SLP:ImgXPS:CorrAdj_mag1
	NVAR CorrAdj_Size1=root:Package_SLP:ImgXPS:CorrAdj_Size1
	NVAR CorrAdj_Rot1=root:Package_SLP:ImgXPS:CorrAdj_Rot1
	NVAR CorrAdj_x2=root:Package_SLP:ImgXPS:CorrAdj_x2
	NVAR CorrAdj_y2=root:Package_SLP:ImgXPS:CorrAdj_y2
	NVAR CorrAdj_mag2=root:Package_SLP:ImgXPS:CorrAdj_mag2
	NVAR CorrAdj_Size2=root:Package_SLP:ImgXPS:CorrAdj_Size2
	NVAR CorrAdj_Rot2=root:Package_SLP:ImgXPS:CorrAdj_Rot2
	NVAR LLim=root:Package_SLP:ImgXPS:LLim
	NVAR ULim=root:Package_SLP:ImgXPS:ULim
	NVAR Iso_a1=root:Package_SLP:ImgXPS:Iso_a1
	NVAR Iso_b1=root:Package_SLP:ImgXPS:Iso_b1
	NVAR Iso_a2=root:Package_SLP:ImgXPS:Iso_a2
	NVAR Iso_b2=root:Package_SLP:ImgXPS:Iso_b2
	NVAR Iso_C=root:Package_SLP:ImgXPS:Iso_C
	
	variable i=0
	variable j=0
	variable k=0
	String Index_txt=""
	String TraceName
	String TraceList
	
	FrameNum=str2num(SLP_IXPS_ScanListW[DataRow][5])
	
	LLim=str2num(SLP_IXPS_ScanListW[DataRow][9])
	ULim=str2num(SLP_IXPS_ScanListW[DataRow][10])
	
	SelSubWindow=SLP_IXPS_ScanListW[DataRow][47]
	CorrAdj_x1=str2num(SLP_IXPS_ScanListW[DataRow][35])
	CorrAdj_y1=str2num(SLP_IXPS_ScanListW[DataRow][36])
	CorrAdj_mag1=str2num(SLP_IXPS_ScanListW[DataRow][37])
	CorrAdj_Size1=str2num(SLP_IXPS_ScanListW[DataRow][38])
	CorrAdj_Rot1=str2num(SLP_IXPS_ScanListW[DataRow][39])
	CorrAdj_x2=str2num(SLP_IXPS_ScanListW[DataRow][40])
	CorrAdj_y2=str2num(SLP_IXPS_ScanListW[DataRow][41])
	CorrAdj_mag2=str2num(SLP_IXPS_ScanListW[DataRow][42])
	CorrAdj_Size2=str2num(SLP_IXPS_ScanListW[DataRow][43])
	CorrAdj_Rot2=str2num(SLP_IXPS_ScanListW[DataRow][44])
	
	//Clear cursor A to prevent CursorHook function from being activated
	Cursor /K/W=SLP_ImgXPS_Panel_01#IX_IMGW A
	Cursor /K/W=SLP_ImgXPS_Panel_01#IX_ResultMap1 A 

	//HYPERSPECTRAL DATA DISPLAY
	If(!StringMatch("y",SLP_IXPS_ScanListW[DataRow][45])) //Raw data has not been removed
		Wave ImgVolW=$ImgVolW_FName
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_ImgW",ImgVolW_FName,1)
		String VolImgName=stringFromList(0,imageNameList("SLP_ImgXPS_Panel_01#IX_ImgW",";"))
		modifyImage /W=SLP_ImgXPS_Panel_01#IX_ImgW $VolImgName,ctab={str2num(SLP_IXPS_ScanListW[DataRow][6]),str2num(SLP_IXPS_ScanListW[DataRow][7]),,0}
		modifyImage /W=SLP_ImgXPS_Panel_01#IX_ImgW $VolImgName,plane=(str2num(SLP_IXPS_ScanListW[DataRow][5]))
		//modifyImage /W=SLP_ImgXPS_Panel_01#IX_ImgW $VolImgName,
		SetAxis /W=SLP_ImgXPS_Panel_01#IX_ImgW /A/R left
		
		//Set slider limit
		Slider Slider_ImgVolFrame limits={0,dimsize(ImgVolW,2)-1,1},win=SLP_ImgXPS_Panel_01
		SLP_IXPS_TgglControls("Enable")
	Else //Raw data removed
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_ImgW",ImgIntgW_FName,1)
		SLP_IXPS_TgglControls("Disable")
		SetAxis /W=SLP_ImgXPS_Panel_01#IX_ImgW /A/R left
	EndIf
	
	//Add the screen outline (Boundary wave generated from ImageAnalyzeParticles - BxW, ByW)
	SLP_Util_RemoveAllTraces("SLP_ImgXPS_Panel_01#IX_ImgW")
	If (Exists(BxW_FName))
		appendtograph /W=SLP_ImgXPS_Panel_01#IX_ImgW $ByW_FName vs $BxW_FName
	EndIf	
	
	//UPDATE PopupMenu (scan types)
	String FitMode=SLP_IXPS_ScanListW[DataRow][17]
	String BG_Type=SLP_IXPS_ScanListW[DataRow][8]
	String FitType=SLP_IXPS_ScanListW[DataRow][17]
	If (Stringmatch(FitType,"LEEM cut-off")||Stringmatch(FitType,"Secondary yield cut-off"))
		PopupMenu popup_BG_Type disable=2,win=SLP_ImgXPS_Panel_01
		SetVariable setvar_N_Peaks disable=2,win=SLP_ImgXPS_Panel_01
	Else
		PopupMenu popup_BG_Type disable=0,win=SLP_ImgXPS_Panel_01
		SetVariable setvar_N_Peaks disable=0,win=SLP_ImgXPS_Panel_01
	EndIf
	PopUpMenu popup_BG_Type win=SLP_ImgXPS_Panel_01, popmatch=BG_Type
	PopupMenu Popup_FitType win=SLP_ImgXPS_Panel_01,Popmatch=FitType
	
	//UPDATE zProfile PLOT
	Variable Display_Fit_Flg=str2num(SLP_IXPS_ScanListW[DataRow][34])
	Variable N_peaks=str2num(SLP_IXPS_ScanListW[DataRow][48])
	
	//UPDATE BE CheckBox
	CheckBox CheckBox_BE win=SLP_ImgXPS_Panel_01,value=str2num(SLP_IXPS_ScanListW[DataRow][44])
	
	//If KE (STV) is used for x-scale (default)
	If (!str2num(SLP_IXPS_ScanListW[DataRow][44])) 
		If (Exists(zProflW_FName))
			//Put new traces in the Fitting window
			SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_FittingWin",zProflW_FName,0)
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin mode=3,marker=5,rgb=(1,34817,52428)
			AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin /R=right $zPMskW_FName
			TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lStyle($TraceName)=2,rgb($TraceName)=(0,0,0)
		Endif
		
		If (!Display_Fit_Flg)
			AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $GssW_FName
			TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lSize($TraceName)=2,rgb($TraceName)=(65535,0,0)
		Else
			If (Exists(zProflFitW_FName))
				AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $zProflFitW_FName
				TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lSize($TraceName)=2,rgb($TraceName)=(65535,43690,0)
			EndIf
		Endif
		
		If (StringMatch(FitMode,"Reverse GLAs Peaks (XPS)"))
		//For GLA fit only//
			//BG
			If (!Display_Fit_Flg) //Gss - displayed when user adjust the guess coef.
				AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $GssBGW_FName
				TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lstyle($TraceName)=2,rgb($TraceName)=(65535,0,0)
			Else //Fit - displayed when the fit has been made
				AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $FitBGW_FName
				TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lstyle($TraceName)=2,rgb($TraceName)=(65535,43690,0)
			Endif
			//Fit components
			For (i=1;i<=N_Peaks;i+=1) //Loop to the number of peaks
				sprintf Index_txt,"%02d",i
				If (!Display_Fit_Flg) //Gss - displayed when user adjust the guess coef.
					GssCompW_FName=ImgVolW_FName+"_gp"+Index_txt
					AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $GssCompW_FName
					TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
					Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lstyle($TraceName)=2,rgb($TraceName)=(65535,0,0)
				Else //Fit - displayed when the fit has been made
					FitCompW_FName=ImgVolW_FName+"_fp"+Index_txt
					AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $FitCompW_FName
					TraceList=TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1);TraceName=StringFromList(ItemsInList(TraceList)-1,TraceList) //The last added name
					Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lstyle($TraceName)=2,rgb($TraceName)=(65535,43690,0)
				Endif
			EndFor
		EndIf
	
			
		Setaxis /W=SLP_ImgXPS_Panel_01#IX_FittingWin /A bottom
		Label /W=SLP_ImgXPS_Panel_01#IX_FittingWin bottom "Start voltage (eV)"
	Else //If BE is used for x-scale
		If (Exists(ZProfBEW_FName))
			//Put new traces in the Fitting window
			SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_FittingWin",ZProfBEW_FName,0)
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin mode=3,marker=5,rgb=(1,34817,52428)
			AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin /R=right $ZProfMskBEW_FName
			TraceName=StringFromList(1,TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1))
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lStyle($TraceName)=2,rgb($TraceName)=(0,0,0)
		Endif
		If (Exists(zProflFitBEW_FName))
			AppendToGraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin $zProflFitBEW_FName
			TraceName=StringFromList(2,TraceNameList("SLP_ImgXPS_Panel_01#IX_FittingWin",";",1))
			Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin lSize($TraceName)=2,rgb($TraceName)=(65535,0,0)
		Endif
		Setaxis /W=SLP_ImgXPS_Panel_01#IX_FittingWin /A/R bottom
		Label /W=SLP_ImgXPS_Panel_01#IX_FittingWin bottom "Binding energy (eV)"
	EndIf
	Modifygraph /W=SLP_ImgXPS_Panel_01#IX_FittingWin minor=1,tick=2
	
	
	//Update Displ. Peak Assignment selection
	CheckBox CheckBox_PeakAssign1 win=SLP_ImgXPS_Panel_01,value=str2num(SLP_IXPS_ScanListW[DataRow][40])
	SLP_IXPS_DispPeakAssign(0) //0 = not use cursor hook
	
	//UPDATE DISPLAY
	//Clear existing images & reset titles
	SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_RawExt1","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_RawExt2","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_RawExt3","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_RawExt4","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_RawExt5","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_RawExt6","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)	
	CheckBox CheckBox_SelImg1 ,win=SLP_ImgXPS_Panel_01, title="Param1"
	CheckBox CheckBox_SelImg2 ,win=SLP_ImgXPS_Panel_01, title="Param2"
	CheckBox CheckBox_SelImg3 ,win=SLP_ImgXPS_Panel_01, title="Param3"
	CheckBox CheckBox_SelImg4 ,win=SLP_ImgXPS_Panel_01, title="Param4"
	CheckBox CheckBox_SelImg5 ,win=SLP_ImgXPS_Panel_01, title="Param5"
	CheckBox CheckBox_SelImg6 ,win=SLP_ImgXPS_Panel_01, title="Param6"
	SLP_IXPS_ScanListW[DataRow][22,27]=""
	
	
	//Min and max for fault color images + color table
	Variable zMin=0
	Variable zMax=0
	String MapColorTable="rainbow" //[TODO] will be able to change in [SETTINGS]
	
	//Display extraction results 'MAPVOL'//
	If (Exists(MapVolW_FName))
		Wave MapVolW=$MapVolW_FName
		Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
		Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
		//IX_RawExt1
		i=0
		j=1
		variable m=22 //Column 22 of ScanListW (to store displayed parameter map 1-6 in col. 22-27)
		string DisplayName=""
		string ChkBoxName=""
		string ImgName=""
		
		//For ParamMap (MapVol) images
		For (i=0;j<=6&&i<dimsize(FitCoefDisplaySelW,0);i+=1) //i = row of FitCoefDisplayW, j = Image name index
			If (FitCoefDisplaySelW[i][8]==48) //Find the row where the 'Display' checkbox is checked
				DisplayName="SLP_ImgXPS_Panel_01#IX_RawExt"+num2str(j)
				SLP_Util_AddnRmTraces(DisplayName,MapVolW_FName,1) //Option 1 = image plot
				ImgName=stringFromList(0,ImageNameList(DisplayName,";"),";")
				ModifyImage /W=$DisplayName $ImgName,plane=i //Select the correct plane in MapVolW
				zMin=str2num(FitCoefDisplayW[i][10])
				zMax=str2num(FitCoefDisplayW[i][11])
				
				//If zMin/zMax are not yet defined
				If (numtype(zMin)==2 &&numtype(zMin)==2)
					zMin=SLP_Util_AutoColor(DisplayName,"Min")
					zMax=SLP_Util_AutoColor(DisplayName,"Max")
					FitCoefDisplayW[i][10]=num2str(zMin)
					FitCoefDisplayW[i][11]=num2str(zMax)
				EndIf
				
				ModifyImage /W=$DisplayName $ImgName ,ctab={zMin,zMax,$MapColorTable,0}
				
				//Update the image display name (shown on the CheckBox's title)
				ChkBoxName="CheckBox_SelImg"+num2str(j)
				CheckBox $ChkBoxName ,win=SLP_ImgXPS_Panel_01, title=FitCoefDisplayW[i][2] 
				//(use the name of the coef. as the title)
				
				//Record the selected param. name to ScanListW
				SLP_IXPS_ScanListW[DataRow][m+(j-1)] =FitCoefDisplayW[i][2]
				
				j+=1
			Endif	
		EndFor
	EndIf
	
	String ImageName=""
	
	//UPDATE Corr AND CMap IMAGES
	If (Exists(Corr1_FName))
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Correction1",Corr1_FName,1)
		ImageName=StringFromList(0,ImageNameList("SLP_ImgXPS_Panel_01#IX_Correction1",";"))
		zMin=str2num(SLP_IXPS_ScanListW[DataRow][18])
		zMax=str2num(SLP_IXPS_ScanListW[DataRow][19])
		If (numtype(zMin)==2 &&numtype(zMin)==2)
			zMin=SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_Correction1","Min")
			zMax=SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_Correction1","Max")
		EndIf
		ModifyImage /W=SLP_ImgXPS_Panel_01#IX_Correction1 $ImageName ctab={zMin,zMax,$MapColorTable,0}
	Else //If CorrW doesn't exists, just leave it blank
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Correction1","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	Endif
	
	If (Exists(CMap1_FName))
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_ResultMap1",Cmap1_FName,1)
		ImageName=StringFromList(0,ImageNameList("SLP_ImgXPS_Panel_01#IX_ResultMap1",";"))
		zMin=str2num(SLP_IXPS_ScanListW[DataRow][20])
		zMax=str2num(SLP_IXPS_ScanListW[DataRow][21])
		If (numtype(zMin)==2 &&numtype(zMin)==2)
			zMin=SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_ResultMap1","Min")
			zMax=SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_ResultMap1","Max")
		EndIf
		ModifyImage /W=SLP_ImgXPS_Panel_01#IX_ResultMap1 $ImageName ctab={zMin,zMax,$MapColorTable,0}		
	Else
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_ResultMap1","root:Package_SLP:ImgXPS:SLP_IXPS_DummyImg1",1)
	Endif
	
	//Selected subWindow (img window)
	CheckBox CheckBox_SelImg1,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg2,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg3,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg4,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg5,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImg6,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImgCorr,value=0,win=SLP_ImgXPS_Panel_01
	CheckBox CheckBox_SelImgCMap,value=0,win=SLP_ImgXPS_Panel_01
	
	Variable ColorMin,ColorMax
	String HistogramW_FName=""
	
	//Update histogram
	SLP_IXPS_SelectImage(SelSubWindow)
	
	If (Exists(HistogramW_FName))
		SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Histogram",HistogramW_FName,0)
		Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mirror=1,minor=1,tick(left)=3,tick(bottom)=2
		Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram  margin(bottom)=20,margin(left)=3,margin(top)=3,margin(right)=3
		ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mode=5,hbFill=2,rgb=(1,34817,52428)
	EndIf
	
	//Update FitCoefDisplayW
	If (Exists(FitCoefDisplayW_FName))
		ListBox List_FitParam,ListWave=$FitCoefDisplayW_FName,SelWave=$FitCoefDisplaySelW_FName,win=SLP_ImgXPS_Panel_01
	Else
		ListBox List_FitParam,ListWave=root:Package_SLP:ImgXPS:SLP_IXPS_FitParamW,SelWave=root:Package_SLP:ImgXPS:SLP_IXPS_FitParamSelW,win=SLP_ImgXPS_Panel_01
	EndIf
	
//	//Isochromaticity function
//	Iso_a1=str2num(SLP_IXPS_ScanListW[DataRow][49])
//	Iso_b1=str2num(SLP_IXPS_ScanListW[DataRow][50])
//	Iso_a2=str2num(SLP_IXPS_ScanListW[DataRow][51])
//	Iso_b2=str2num(SLP_IXPS_ScanListW[DataRow][52])
//	Iso_C=str2num(SLP_IXPS_ScanListW[DataRow][53])
	
	//z-profile cursor
	controlinfo /W=SLP_ImgXPS_Panel_01 Check_zProfile
	If (stringmatch(SLP_IXPS_ScanListW[DataRow][45],"0")&&V_Value==1) //If the raw data exists and the z-profile is checked
		If (stringmatch(SLP_IXPS_ScanListW[DataRow][42],""))
			variable default_CursorX=round(DimSize($ImgVolW_FName,0)/2)
			variable default_CursorY=round(DimSize($ImgVolW_FName,1)/2)
			Cursor /I/W=SLP_ImgXPS_Panel_01#IX_IMGW/C=(65525,0,0) A $VolImgName default_CursorX,default_CursorY
			SLP_IXPS_ScanListW[DataRow][42]=num2str(default_CursorX)
			SLP_IXPS_ScanListW[DataRow][43]=num2str(default_CursorY)
		Else
			Variable xPos=pnt2x($ImgVolW_FName,str2num(SLP_IXPS_ScanListW[DataRow][42]))
			Variable yPos=DimOffset($ImgVolW_FName, 1) + str2num(SLP_IXPS_ScanListW[DataRow][43]) *DimDelta($ImgVolW_FName,1)
			Cursor /I/W=SLP_ImgXPS_Panel_01#IX_IMGW/C=(65525,0,0) A $VolImgName xPos,yPos
		Endif
	Endif
	
	//Update xps param table
	SLP_IXPS_XPSParamW[0][1]=SLP_IXPS_ScanListW[DataRow][11]
	SLP_IXPS_XPSParamW[1][1]=SLP_IXPS_ScanListW[DataRow][12]
	SLP_IXPS_XPSParamW[2][1]=SLP_IXPS_ScanListW[DataRow][13]
	SLP_IXPS_XPSParamW[3][1]=SLP_IXPS_ScanListW[DataRow][14]
	SLP_IXPS_XPSParamW[4][1]=SLP_IXPS_ScanListW[DataRow][15]
	
	//Update CMap cursor
	Variable CMapCsrFlg=str2num(SLP_IXPS_ScanListW[DataRow][56])
	CheckBox Check_CMapCsr Win=SLP_ImgXPS_Panel_01,value=CMapCsrFlg
	SLP_IXPS_DisplayCMapCsr(CMapCsrFlg)
	
	//ListBox selection DataRow
	SLP_IXPS_ScanListDisplaySelW[][0]=SLP_IXPS_ScanListDisplaySelW[p][0](0x01)
	SLP_IXPS_ScanListDisplaySelW[DataRow][0]=SLP_IXPS_ScanListDisplaySelW[DataRow][0]|(0x01)
	//ListBox List_ScansList win=SLP_ImgXPS_Panel_01,SelRow=DataRow
	//For ListBox with mode 3 (multiple selection enable), cannot use SelRow!
	
	//Display XPS extraction button
	If (Stringmatch(SLP_IXPS_ScanListW[DataRow][59],"1")&&Stringmatch(SLP_IXPS_ScanListW[DataRow][17],"Reverse GLAs Peaks (XPS)"))
		Button  Button_ExpFitSequence disable=0,Win=SLP_ImgXPS_Panel_01
		Button  Button_ExpPeakArea disable=0,Win=SLP_ImgXPS_Panel_01
	Else
		Button  Button_ExpFitSequence disable=1,Win=SLP_ImgXPS_Panel_01
		Button  Button_ExpPeakArea disable=1,Win=SLP_ImgXPS_Panel_01
	EndIf
	
End

Function ButtonProc_IXPS_ScanSelection(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
			strswitch(ba.CtrlName)	// string switch
				case "Button_SelAll":
					SLP_IXPS_ScanListDisplaySelW[][0]=SLP_IXPS_ScanListDisplaySelW[p][0]|(0x10)
					break
				case "Button_SelNone":
					SLP_IXPS_ScanListDisplaySelW[][0]=SLP_IXPS_ScanListDisplaySelW[p][0]&~(0x10)
					break
				case "Button_SelHighlighted":
					SLP_IXPS_ScanListDisplaySelW[][0]=SLP_IXPS_ScanListDisplaySelW[p][0]|(0x10&((SLP_IXPS_ScanListDisplaySelW[p][0]&0x1)*0x10))
					//SEL|(0x10&((SEL&0x1)*0x10))
					break
				case "Button_UnSelHighlighted":
					SLP_IXPS_ScanListDisplaySelW[][0]=SLP_IXPS_ScanListDisplaySelW[p][0]&~(0x10&((SLP_IXPS_ScanListDisplaySelW[p][0]&0x1)*0x10))
					break
				case "Button_Done":
					Dowindow /K SLP_ImgXPS_ScanSelection01
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function Panel_ImgXPS_ScanSelection() : Panel
	Dowindow /K SLP_ImgXPS_ScanSelection01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(545,115,785,501) /N=SLP_ImgXPS_ScanSelection01
	ModifyPanel cbRGB=(30000,50000,35000)
	ListBox list_ScanSelection,pos={6,7},size={230,325}
	ListBox list_ScanSelection,listWave=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	ListBox list_ScanSelection,selWave=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	ListBox list_ScanSelection,widths={20,70,250,0,0,0,0,0,0,0,0,0,0,0,0,0},mode= 3 //Can select many adjacent rows
	ListBox list_ScanSelection,userColumnResize= 1
	Button Button_UnSelHighlighted,pos={108,339},size={120,16},proc=ButtonProc_IXPS_ScanSelection,title="Unselect highlighted"
	Button Button_UnSelHighlighted,fSize=10
	Button Button_SelHighlighted,pos={6,338},size={100,16},proc=ButtonProc_IXPS_ScanSelection,title="Select highlighted"
	Button Button_SelHighlighted,fSize=10
	Button Button_Done,pos={176,358},size={50,16},proc=ButtonProc_IXPS_ScanSelection,title="Done"
	Button Button_Done,fSize=10
	Button Button_SelAll,pos={6,357},size={80,16},proc=ButtonProc_IXPS_ScanSelection,title="Select all"
	Button Button_SelAll,fSize=10
	Button Button_SelNone,pos={89,358},size={80,16},proc=ButtonProc_IXPS_ScanSelection,title="Select none"
	Button Button_SelNone,fSize=10
End


Function ButtonProc_IXPS(ba) : ButtonControl
	//MODIFIED: 13.02.2021 - Button_ReScale = use setaxis /A/R for left axis of 3Dvol plot (reverse axis)
	
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			strswitch(ba.CtrlName)	// string switch
				case "Button_ChangeHistogram":		// execute if case matches expression
					SLP_IXPS_AdjustHistogram()
					break
				case "Button_AutoColor":
					SLP_IXPS_AutoColor()
					break
				case "Button_ExportHist":
					SLP_IXPS_ExportHistogram()
					break
				case "Button_ReScale":
					SetAxis /A/R /W=SLP_ImgXPS_Panel_01#IX_ImgW left
					SetAxis /A /W=SLP_ImgXPS_Panel_01#IX_ImgW bottom
					break
				case "Button_MoveUp":
					SLP_IXPS_MoveDataRow("Up")
					break
				case "Button_MoveDown":
					SLP_IXPS_MoveDataRow("Down")
					break
				case "Button_SelMulti":
//					Wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
//					SLP_IXPS_ScanListDisplaySelW[][0]=32+(SLP_IXPS_ScanListDisplaySelW[p][0]==33||SLP_IXPS_ScanListDisplaySelW[p][0]==49||SLP_IXPS_ScanListDisplaySelW[p][0]==48)*16
					Panel_ImgXPS_ScanSelection()
					break
				case "Button_ExpFitSequence":
					SLP_IXPS_FitExportVideoUX()
					break
				case "Button_ExpPeakArea":
					SLP_IXPS_AreaSpecMapsDisplayUX()
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_ExportZProf(ba) : ButtonControl
	//MODIFIED: 13.02.2021 - Now don't duplicate the exported wave so that zProfl from different area can be plotted separately. 
	//		Export button proc is now updated so that it doesn't overwrite the exported zProfl. 
	//		Instead the new code use p and q pos to name the exported wave and also prompt user to enter new names if they are already used.	
	
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			wave /T SLP_IXPS_XPSParamW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamW
			string ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
			string VolName=SLP_IXPS_ScanListW[SelRow][0]
			
			String zProflW_FName=ImgVolW_FName+"_zProfl"
			String zPMskW_FName=ImgVolW_FName+"_zPMsk"
			String zProflFitW_FName=ImgVolW_FName+"_zProflFit"
			//String zProflFitW_FName=SLP_IXPS_ScanListW[SelRow][1]+"Fit_"+SLP_IXPS_ScanListW[SelRow][0]+"_zProfl"
			
			String ZProfBEW_FName=ImgVolW_FName+"_zProflBE"
			String ZProfMskBEW_FName=ImgVolW_FName+"_zPMskBE" 
			String zProflFitBEW_FName=zProflFitW_FName+"BE"
			
			String zProflW_Name=VolName+"_zProfl"
			String zPMskW_Name=VolName+"_zPMsk"
			String zProflFitW_Name="Fit_"+VolName+"_zProfl"
			
			String ZProfBEW_Name=VolName+"_zProflBE"
			String ZProfMskBEW_Name=VolName+"_zPMskBE" 
			String zProflFitBEW_Name="Fit_"+VolName+"_zProflBE"
			
			Variable SelFrame=str2num(SLP_IXPS_ScanListW[SelRow][5])
			String Cursor_p=SLP_IXPS_ScanListW[SelRow][42]
			String Cursor_q=SLP_IXPS_ScanListW[SelRow][43]
			
			String TraceName=""
			String Exp_zProfl_Name=""
			String Exp_zPMaskW_Name=""
			String Exp_zProflFit_Name=""
			String Exp_Image_Name=""
			String GraphName=""
			//If KE (STV) is used for x-scale (default)
			If (!str2num(SLP_IXPS_ScanListW[SelRow][44]))
				Exp_zProfl_Name=(zProflW_Name+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
				Exp_zPMaskW_Name=(zPMskW_Name+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
				Exp_zProflFit_Name=(zProflFitW_Name+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
			Else 
				Exp_zProfl_Name=(ZProfBEW_Name+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
				Exp_zPMaskW_Name=(ZProfMskBEW_Name+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
				Exp_zProflFit_Name=(zProflFitBEW_Name+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
			EndIF	
			Exp_Image_Name=(VolName+"_Frame"+Num2str(SelFrame)+"_p"+Cursor_p+"_q"+Cursor_q+"_export")
				
			If (CheckName(Exp_zProfl_Name,1))//Check whether duplicate or illegal
				Exp_zProfl_Name=cleanupname(uniqueName((Exp_zProfl_Name),1,0),0)
				Exp_zPMaskW_Name=cleanupname(uniqueName((Exp_zPMaskW_Name),1,0),0)
				Exp_zProflFit_Name=cleanupname(uniqueName((Exp_zProflFit_Name),1,0),0)
				Exp_Image_Name=cleanupname(uniqueName((Exp_Image_Name),1,0),0)
				Prompt Exp_zProfl_Name,"zProfile wave name"
				Prompt Exp_zPMaskW_Name,"Mask wave name"
				Prompt Exp_zProflFit_Name,"Fit wave name"
				Prompt Exp_Image_Name,"ImageName"
				DoPrompt "Duplicate or illegal image wave name.A new name is suggested below..",Exp_zProfl_Name,Exp_zPMaskW_Name,Exp_zProflFit_Name,Exp_Image_Name
			Endif
			If (!str2num(SLP_IXPS_ScanListW[SelRow][44]))
				Duplicate /O $zProflW_FName,$Exp_zProfl_Name /WAVE=zProflW
				Duplicate /O $zPMskW_FName,$Exp_zPMaskW_Name /WAVE=zPMskW
				Duplicate /O $zProflFitW_FName,$Exp_zProflFit_Name /WAVE=zProflFitW
			Else
				Duplicate /O $ZProfBEW_Name,$Exp_zProfl_Name /WAVE=zProflW
				Duplicate /O $ZProfMskBEW_Name,$Exp_zPMaskW_Name /WAVE=zPMskW
				Duplicate /O $zProflFitBEW_Name,$Exp_zProflFit_Name /WAVE=zProflFitW
			EndIF
			
			Duplicate /O /R=[][][SelFrame] $ImgVolW_FName,$Exp_Image_Name /Wave=ImageW
			redimension /N=(dimsize(ImageW,0),dimsize(ImageW,1)) ImageW
			Display zProflW
			GraphName=S_Name
			Appendtograph zProflFitW
			appendtograph /R=right zPMskW
			Setaxis /A bottom
			Label bottom "Start voltage (eV)"
			NewImage /Host=$GraphName /N=ImgDisplay ImageW
			Cursor /I /W=$(GraphName+"#ImgDisplay") A $Exp_Image_Name str2num(Cursor_p),str2num(Cursor_q)
			ModifyGraph /W=$(GraphName+"#ImgDisplay") margin=2,nolabel=2
			TraceName=StringFromList(0,TraceNameList(GraphName,";",1))
			Modifygraph /W=$(GraphName) mode($TraceName)=3,marker($TraceName)=5,rgb($TraceName)=(1,34817,52428)
			TraceName=StringFromList(2,TraceNameList(GraphName,";",1))
			Modifygraph /W=$(GraphName) lStyle($TraceName)=2,rgb($TraceName)=(0,0,0)
			TraceName=StringFromList(1,TraceNameList(GraphName,";",1))
			Modifygraph /W=$(GraphName) lSize=2,rgb($TraceName)=(65017,39595,2248)
			Modifygraph /W=$(GraphName) margin(left)=198,mirror(bottom)=1,tick=2,minor=1,nticks(bottom)=10
			Legend /A=RB /W=$(GraphName)
			ModifyGraph /W=$(GraphName) width=353,height=277.795;DoUpdate
			ModifyGraph /W=$(GraphName) width=0,height=0
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_MoveDataRow(MvDirection)
	String MvDirection
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	Wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	Wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_value
	Make /T/O/N=(1,dimsize(SLP_IXPS_ScanListW,1)) root:Package_SLP:ImgXPS:ScanListSwapRow /Wave=ScanListSwapRow
	Make /T/O/N=(1,dimsize(SLP_IXPS_ScanListDisplayW,1)) root:Package_SLP:ImgXPS:ScanListDispSwapRow /Wave=ScanListDispSwapRow
	Make /O/N=(1,dimsize(SLP_IXPS_ScanListDisplaySelW,1)) root:Package_SLP:ImgXPS:ScanListDispSelSwapRow /Wave=ScanListDispSelSwapRow
	
	ScanListSwapRow=SLP_IXPS_ScanListW[SelRow][q]
	ScanListDispSwapRow=SLP_IXPS_ScanListDisplayW[SelRow][q]
	ScanListDispSelSwapRow=SLP_IXPS_ScanListDisplaySelW[SelRow][q]
	
	strswitch(MvDirection)	// string switch
		case "Up":
			If (SelRow>0)		
				SLP_IXPS_ScanListW[SelRow][]=SLP_IXPS_ScanListW[SelRow-1][q]
				SLP_IXPS_ScanListDisplayW[SelRow][]=SLP_IXPS_ScanListDisplayW[SelRow-1][q]
				SLP_IXPS_ScanListDisplaySelW[SelRow][]=SLP_IXPS_ScanListDisplaySelW[SelRow-1][q]
				SLP_IXPS_ScanListW[SelRow-1][]=ScanListSwapRow[0][q]
				SLP_IXPS_ScanListDisplayW[SelRow-1][]=ScanListDispSwapRow[0][q]
				SLP_IXPS_ScanListDisplaySelW[SelRow-1][]=ScanListDispSelSwapRow[0][q]
				ListBox List_ScansList win=SLP_ImgXPS_Panel_01,SelRow=SelRow-1
			EndIf
			break						
		case "Down":
			If (SelRow<dimsize(SLP_IXPS_ScanListW,0)-1)
				SLP_IXPS_ScanListW[SelRow][]=SLP_IXPS_ScanListW[SelRow+1][q]
				SLP_IXPS_ScanListDisplayW[SelRow][]=SLP_IXPS_ScanListDisplayW[SelRow+1][q]
				SLP_IXPS_ScanListDisplaySelW[SelRow][]=SLP_IXPS_ScanListDisplaySelW[SelRow+1][q]
				SLP_IXPS_ScanListW[SelRow+1][]=ScanListSwapRow[0][q]
				SLP_IXPS_ScanListDisplayW[SelRow+1][]=ScanListDispSwapRow[0][q]
				SLP_IXPS_ScanListDisplaySelW[SelRow+1][]=ScanListDispSelSwapRow[0][q]
				ListBox List_ScansList win=SLP_ImgXPS_Panel_01,SelRow=SelRow+1
			EndIf
			break						
	endswitch
End

Function Panel_IXPS_MapCorr() : Panel
	NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
	NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
	NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
	NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
	NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
	NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
	NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
	NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
	NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
	NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
	NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
	NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
	NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
	NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
	NVAR MCorrMinInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMinInt
	NVAR MCorrMaxInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMaxInt
	SVAR PresetList=root:Package_SLP:ImgXPS:ManCorr:PresetList
	SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
	
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	Variable SelRow=V_Value
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
	String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
	String UMapW_Name=VolName+"_Umap1"
	String UMapW_FName=ImgVolW_FName+"_Umap1"
	String CorrW_Name=VolName+"_Corr1"
	String CorrW_FName=ImgVolW_FName+"_Corr1"
	String CMapW_Name=VolName+"_CMap1"
	String CMapW_FName=ImgVolW_FName+"_CMap1"
	Wave UMapW=$UMapW_FName
	Wave CorrW=$CorrW_FName
	Wave CMapW=$CMapW_FName
	
	Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
	
	PauseUpdate; Silent 1		// building window...
	DoWindow /K SLP_ImgXPS_MapCorr
	
	Variable PanelWidth=1010
	NewPanel /W=(120,50,120+PanelWidth,680) /N=SLP_ImgXPS_MapCorr
	modifypanel /W=SLP_ImgXPS_MapCorr cbRGB=(30000,50000,35000)
	ShowInfo/W=SLP_ImgXPS_MapCorr
	
	SetDrawEnv fsize= 14
	DrawText 18,24,"Imaging XPS mapping correction"
	DrawText 18,44,"Uncorrected map"
	DrawText 358,44,"Correction"
	DrawText 695,44,"Corrected map"
	
	//Preset, Setvar and Ref block#0
	DrawText 8,531,"Reference point"
	
	//SetVar
	SetVariable Setvar_MCorrMinInt,pos={285,7},size={160,15},proc=SetVarProc_IXPS_MCorrColorScale,title="Color scale: Minimum"
	SetVariable Setvar_MCorrMinInt,limits={-inf,inf,0.02},value= root:Package_SLP:ImgXPS:ManCorr:MCorrMinInt
	SetVariable Setvar_MCorrMaxInt,pos={454,7},size={110,15},proc=SetVarProc_IXPS_MCorrColorScale,title="Maximuum"
	SetVariable Setvar_MCorrMaxInt,limits={-inf,inf,0.02},value= root:Package_SLP:ImgXPS:ManCorr:MCorrMaxInt
	SetVariable setvar_Notes,pos={580,7},size={400,15},proc=SetVarProc_IXPS_MCorrNote,title="Notes"
	SetVariable setvar_Notes,value= root:Package_SLP:ImgXPS:ManCorr:PresetNote
	
	SetVariable setvar_a0,pos={11,365},size={88,15},title="a0:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_a0,limits={-inf,inf,0},value= a0
	SetVariable setvar_a1,pos={11,385},size={88,15},title="a1:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_a1,limits={-inf,inf,0},value= a1
	SetVariable setvar_b0,pos={11,405},size={88,15},title="b0:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_b0,limits={-inf,inf,0},value= b0
	SetVariable setvar_b1,pos={11,425},size={88,15},title="b1:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_b1,limits={-inf,inf,0},value= b1
	SetVariable setvar_C,pos={11,445},size={88,15},title="C:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_C,limits={-inf,inf,0},value= C
	SetVariable setvar_d0,pos={11,465},size={88,15},title="d0:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_d0,limits={-inf,inf,0},value= d0
	SetVariable setvar_d1,pos={11,485},size={88,15},title="d1:",proc=SetVarProc_IXPS_MCorr
	SetVariable setvar_d1,limits={-inf,inf,0},value= d1
	
	SetVariable setvar_pRef,pos={8,536},size={50,15},title="p:"
	SetVariable setvar_pRef,limits={-inf,inf,0},value= PosW_p
	SetVariable setvar_qRef1,pos={62,536},size={50,15},title="q:"
	SetVariable setvar_qRef1,limits={-inf,inf,0},value= PosW_q
	SetVariable setvar_zRef,pos={8,556},size={90,15},title="z:"
	SetVariable setvar_zRef,limits={-inf,inf,0},value= PosW_Ref

	//Popup menu
	SLP_IXPS_MCorrReadPreset()
	PopupMenu popup_CorrectionPreset2,pos={7,337},size={101,20},title="Preset",proc=PopMenuProc_IXPS_ManCorrPreset
	PopupMenu popup_CorrectionPreset2,mode=1,value=#PresetList
	ControlInfo /W=SLP_ImgXPS_Panel_01 popup_CorrectionPreset;String Preset_Str=S_Value //Selection in the main ImgXPS panel
	PopupMenu popup_CorrectionPreset2,popmatch=Preset_Str //Set popup to match what is set in the main ImgXPS panel
	
	//Slider block#1 Banana function
	Variable Block1_x=115
	Variable Block1_y=325
	Variable Block1_xSize=583
	Variable Block1_ySize=275
	Variable Block1_Row1_yOffset=24
	Variable Block1_Row2_yOffset=33
	Variable Block1_Slider_xSize=80
	Variable Block1_Slider_ySize=210
	Variable Block1_Row3_yOffset=249
	
	DrawText Block1_x,Block1_y,"Isochromatism correction coefficients"
	
	SetDrawEnv linethick= 2,linefgc= (39321,39321,39321),fillpat= 0,fillbgc= (26205,52428,1)
	DrawRRect Block1_x+2,Block1_y+2,Block1_x+2+Block1_xSize,Block1_y+2+Block1_ySize
	
	SetDrawLayer UserBack
	DrawText Block1_x+15+0*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"a\\B0"
	DrawText Block1_x+15+1*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"a\\B1"
	DrawText Block1_x+15+2*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"b\\B0"
	DrawText Block1_x+15+3*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"b\\B1"
	DrawText Block1_x+15+4*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"C"
	DrawText Block1_x+15+5*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"d\\B0"
	DrawText Block1_x+15+6*Block1_xSize/7,Block1_y+Block1_Row1_yOffset,"d\\B1"
	
	Slider Slider_a0,pos={Block1_x+15+0*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_a1,pos={Block1_x+15+1*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_b0,pos={Block1_x+15+2*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_b1,pos={Block1_x+15+3*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_C,pos={Block1_x+15+4*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_d0,pos={Block1_x+15+5*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_d1,pos={Block1_x+15+6*Block1_xSize/7,Block1_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	
	Slider Slider_a0,limits={1e-07,0.0001,3.03899e-09},variable= a0,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	Slider slider_a1,limits={0.00433388,0.00529697,4.81542e-06},variable= a1,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	Slider slider_b0,limits={-0.000769167,-0.000940093,-8.5463e-07},variable= b0,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	Slider slider_b1,limits={-2.31559e-05,-0.00283017,-2.57288e-07},variable= b1,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	Slider slider_C,limits={34.3362,41.9665,0.0381513},variable= C,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	Slider slider_d0,limits={-0.0173047,0.0173047,6.11861e-06},variable= d0,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	Slider slider_d1,limits={0.544514,-0.544514,-4.95013e-05},variable= d1,ticks= 10,proc=SliderProc_IXPS_CorrAdj,tkLblRot=60
	
	Button button_Range_a0,pos={Block1_x+15+0*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_a1,pos={Block1_x+15+1*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_b0,pos={Block1_x+15+2*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_b1,pos={Block1_x+15+3*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_C,pos={Block1_x+15+4*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_d0,pos={Block1_x+15+5*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_d1,pos={Block1_x+15+6*Block1_xSize/7,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	
	//Slider block#2 Correction
	Variable Block2_x=705
	Variable Block2_y=325
	Variable Block2_xSize=295
	Variable Block2_ySize=275
	
	SetDrawEnv linethick= 2,linefgc= (39321,39321,39321),fillpat= 0,fillbgc= (26205,52428,1)
	DrawRRect Block2_x+2,Block2_y+2,Block2_x+2+Block2_xSize,Block2_y+2+Block2_ySize
	
	DrawText Block2_x,Block2_y,"Offsets, scaling and rotation"
	
	DrawText Block2_x+15+0*Block2_xSize/4,Block1_y+Block1_Row1_yOffset,"X\\BOffset"
	DrawText Block2_x+15+1*Block2_xSize/4,Block1_y+Block1_Row1_yOffset,"Y\\BOffset"
	DrawText Block2_x+15+2*Block2_xSize/4,Block1_y+Block1_Row1_yOffset,"Scaling"
	DrawText Block2_x+15+3*Block2_xSize/4,Block1_y+Block1_Row1_yOffset,"Rotation"
	
	Slider slider_xOffset,pos={Block2_x+15+0*Block2_xSize/4,Block2_y+Block1_Row2_yOffset},size={Block1_Slider_xSize,Block1_Slider_ySize}
	Slider slider_yOffset,pos={Block2_x+15+1*Block2_xSize/4,Block2_y+Block1_Row2_yOffset},size={47,210}
	Slider slider_Mag,pos={Block2_x+15+2*Block2_xSize/4,Block2_y+Block1_Row2_yOffset},size={53,210}
	Slider slider_Rot,pos={Block2_x+15+3*Block2_xSize/4,Block2_y+Block1_Row2_yOffset},size={59,210}
	
	Slider slider_xOffset,limits={-5,5,0.05},variable= x_offset,ticks= 10,tkLblRot=60,proc=SliderProc_IXPS_CorrAdj
	Slider slider_yOffset,limits={-5,5,0.05},variable= y_offset,ticks= 10,tkLblRot=60,proc=SliderProc_IXPS_CorrAdj
	Slider slider_Mag,limits={0.01,2,0.01},variable= mag,ticks= 10,tkLblRot=60,proc=SliderProc_IXPS_CorrAdj
	Slider slider_Rot,limits={-180,180,1},variable= Rot_Angle,ticks= 10,tkLblRot=60,proc=SliderProc_IXPS_CorrAdj
	
	Button button_Range_x_Offset,pos={Block2_x+15+0*Block2_xSize/4,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_y_Offset,pos={Block2_x+15+1*Block2_xSize/4,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10
	Button button_Range_Mag,pos={Block2_x+15+2*Block2_xSize/4,Block1_y+Block1_Row3_yOffset},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Range",fSize=10	
	
	//Bottom buttons
	Variable BottomRow_y=605
	Button button_AutoFit,pos={118,BottomRow_y},size={40,20},proc=ButtonProc_IXPS_MCorr,title="Auto",fSize=10
	Button button_Save2Preset,pos={164,BottomRow_y},size={120,20},proc=ButtonProc_IXPS_MCorr,title="Save values to preset",fSize=10
	Button button_SavePreset,pos={291,BottomRow_y},size={80,20},proc=ButtonProc_IXPS_MCorr,title="Save preset..",fSize=10
	Button button_LoadPreset,pos={376,BottomRow_y},size={80,20},proc=ButtonProc_IXPS_MCorr,title="Load preset..",fSize=10
	Button button_Offset_Zero,pos={461,BottomRow_y},size={80,20},proc=ButtonProc_IXPS_MCorr,title="Remove offset",fSize=10
	Button button_Done,pos={947,BottomRow_y},size={40,20},proc=ButtonProc_IXPS_MCorr,title="Done",fSize=10
//	Button button_Range_Undo,pos={118,618},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Undo",fSize=10
//	Button button_Offset_Undo,pos={707,616},size={40,20},proc=ButtonProc_IXPS_IsoC_Range,title="Undo",fSize=10
//	Button button_AdjRefPoint,pos={28,577},size={60,20},proc=ButtonProc_IXPS_MCorr,title="Change",fSize=10
//	Button button_AutoMask,pos={219,618},size={120,20},proc=ButtonProc_IXPS_MCorr,title="Create mask for auto",fSize=10
	
	//Images (UMap,Corr,CMap)
	Variable ImageOffset_x=10
	Variable ImageOffset_y=45
	Variable Image_xSize=325
	Variable Image_ySize=260
	Variable Image_Spacing=(PanelWidth-ImageOffset_x-1)/3
	
	Display/W=(ImageOffset_x+0*Image_Spacing,ImageOffset_y,ImageOffset_x+Image_xSize,ImageOffset_y+Image_ySize)/HOST=# 
	AppendImage/T UMapW
	ModifyImage $UMapW_Name ctab= {MCorrMinInt,MCorrMaxInt,Rainbow,0}
	ModifyGraph margin(left)=28,margin(bottom)=14,margin(top)=28,margin(right)=14,wbRGB=(16000,42000,1)
	ModifyGraph mirror=2,nticks=4,minor=1,fSize=9,standoff=0,tkLblRot(left)=90,btLen=3,tlOffset=-2
	TextBox /A=RT UMapW_Name
	SetAxis/A/R left
	RenameWindow #,UMap
	SetActiveSubwindow ##
	
	Display/W=(ImageOffset_x+1*Image_Spacing,ImageOffset_y,ImageOffset_x+1*Image_Spacing+Image_xSize,ImageOffset_y+Image_ySize)/HOST=# 
	AppendImage/T CorrW
	ModifyImage $CorrW_Name ctab= {MCorrMinInt,MCorrMaxInt,Rainbow,0}
	ModifyGraph margin(left)=28,margin(bottom)=14,margin(top)=28,margin(right)=14,wbRGB=(16000,42000,1)
	ModifyGraph mirror=2,nticks=4,minor=1,fSize=9,standoff=0,tkLblRot(left)=90,btLen=3,tlOffset=-2
	SetAxis/A/R left
	RenameWindow #,Corr
	SetActiveSubwindow ##
	
	Display/W=(ImageOffset_x+2*Image_Spacing,ImageOffset_y,ImageOffset_x+2*Image_Spacing+Image_xSize,ImageOffset_y+Image_ySize)/HOST=# 
	AppendImage/T CMapW
	ModifyImage $CMapW_Name ctab= {MCorrMinInt,MCorrMaxInt,Rainbow,0}
	ModifyGraph margin(left)=28,margin(bottom)=14,margin(top)=28,margin(right)=14,wbRGB=(216000,42000,1)
	ModifyGraph mirror=2,nticks=4,minor=1,fSize=9,standoff=0,tkLblRot(left)=90,btLen=3,tlOffset=-2
	SetAxis/A/R left
	RenameWindow #,CMap
	SetActiveSubwindow ##
	
	//Put cursor on UMAP
	Cursor/P/I/W=SLP_ImgXPS_MapCorr#UMAP A $UMapW_Name PosW_p,PosW_q
	
	setwindow SLP_ImgXPS_MapCorr,hook(RefUpdate)=SLP_IXPS_MCorrCursorHook
	
End

Function SLP_IXPS_GenIsoChrom2(VolName) // Banana function 
	string VolName
	
	Variable DataRow=SLP_IXPS_FindDataRow(VolName)
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	string ImgVolW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
	String ImgIntgW_FName=ImgVolW_FName+"_Intg"
	String BxW_FName=ImgVolW_FName+"_BX"
	String ByW_FName=ImgVolW_FName+"_BY"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"
	String Corr1_FName=ImgVolW_FName+"_Corr1"
	String Corr1H_FName=ImgVolW_FName+"_Corr1H"
	String CMap1_FName=ImgVolW_FName+"_CMap1"
	String CMap1H_FName=ImgVolW_FName+"_CMap1H"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	
	NVAR Iso_a1=root:Package_SLP:ImgXPS:Iso_a1
	NVAR Iso_b1=root:Package_SLP:ImgXPS:Iso_b1
	NVAR Iso_a2=root:Package_SLP:ImgXPS:Iso_a2
	NVAR Iso_b2=root:Package_SLP:ImgXPS:Iso_b2
	NVAR Iso_C=root:Package_SLP:ImgXPS:Iso_C

	
	Wave UnprocMap1=$UnprocMap1_FName
	duplicate /O $UnprocMap1_FName,$Corr1_FName /Wave=Corr1

	make /O/N=7 twoDParabolic_CoefW
	twoDParabolic_CoefW={7.60519e-06,0.00490413,-0.000352412,-0.00153916,-0.333898,0.00265108,0.0656613}
	
	FuncFitMD /NTHR=0/TBOX=768 SLP_FitFunc_2DPabl2 twoDParabolic_CoefW UnprocMap1  /D 
	
	Iso_a1=twoDParabolic_CoefW[0]
	Iso_b1=twoDParabolic_CoefW[1]
	Iso_C=twoDParabolic_CoefW[2]
	Iso_a2=twoDParabolic_CoefW[3]
	Iso_b2=twoDParabolic_CoefW[4]
	
	SLP_IXPS_ScanListW[DataRow][49]=num2str(Iso_a1)
	SLP_IXPS_ScanListW[DataRow][50]=num2str(Iso_b1)
	SLP_IXPS_ScanListW[DataRow][51]=num2str(Iso_a2)
	SLP_IXPS_ScanListW[DataRow][52]=num2str(Iso_b2)
	SLP_IXPS_ScanListW[DataRow][53]=num2str(Iso_C)
	
	Corr1=SLP_Func_2DPabl2(twoDParabolic_CoefW[0],twoDParabolic_CoefW[1],twoDParabolic_CoefW[2],twoDParabolic_CoefW[3],twoDParabolic_CoefW[4],twoDParabolic_CoefW[5],twoDParabolic_CoefW[6],x,y)
	
	killwaves twoDParabolic_CoefW
	
End

Function SLP_IXPS_GenIsoChrom1(VolName) //Simple 2D parabol.
	string VolName
	
	Variable DataRow=SLP_IXPS_FindDataRow(VolName)
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	string ImgVolW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
	String ImgIntgW_FName=ImgVolW_FName+"_Intg"
	String BxW_FName=ImgVolW_FName+"_BX"
	String ByW_FName=ImgVolW_FName+"_BY"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"
	String Corr1_FName=ImgVolW_FName+"_Corr1"
	String Corr1H_FName=ImgVolW_FName+"_Corr1H"
	String CMap1_FName=ImgVolW_FName+"_CMap1"
	String CMap1H_FName=ImgVolW_FName+"_CMap1H"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	
	NVAR Iso_a1=root:Package_SLP:ImgXPS:Iso_a1
	NVAR Iso_b1=root:Package_SLP:ImgXPS:Iso_b1
	NVAR Iso_a2=root:Package_SLP:ImgXPS:Iso_a2
	NVAR Iso_b2=root:Package_SLP:ImgXPS:Iso_b2
	NVAR Iso_C=root:Package_SLP:ImgXPS:Iso_C

	Wave UnprocMap1=$UnprocMap1_FName
	duplicate /O $UnprocMap1_FName,$Corr1_FName /Wave=Corr1

	make /O/N=5 twoDParabolic_CoefW
	twoDParabolic_CoefW=1
	
	FuncFitMD/NTHR=0/TBOX=768 TwoD_Parabolic twoDParabolic_CoefW UnprocMap1  /D 
	
	Iso_a1=twoDParabolic_CoefW[0]
	Iso_b1=twoDParabolic_CoefW[1]
	Iso_C=twoDParabolic_CoefW[2]
	Iso_a2=twoDParabolic_CoefW[3]
	Iso_b2=twoDParabolic_CoefW[4]
	
	SLP_IXPS_ScanListW[DataRow][49]=num2str(Iso_a1)
	SLP_IXPS_ScanListW[DataRow][50]=num2str(Iso_b1)
	SLP_IXPS_ScanListW[DataRow][51]=num2str(Iso_a2)
	SLP_IXPS_ScanListW[DataRow][52]=num2str(Iso_b2)
	SLP_IXPS_ScanListW[DataRow][53]=num2str(Iso_C)
	
	killwaves twoDParabolic_CoefW
	
	Corr1=Iso_a1*x^2+Iso_b1*x+Iso_C+Iso_a2*y^2+Iso_b2*y
	
End

Function SLP_IXPS_ManCorrPresetInit()
	Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
	ManCorr_Preset[][0]={"--","100um","75um","50um","25um","15um","10um","5um","3um","2um","User1","User2","User3","User4","User5","User6"}
	ManCorr_Range[][0]={"--","100um","75um","50um","25um","15um","10um","5um","3um","2um","User1","User2","User3","User4","User5","User6"}
	//100 um FOV (NEED calibration)
	ManCorr_Preset[1][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//75 um FOV (NEED calibration)
	ManCorr_Preset[2][1]={{"1.39E-05"},{"-0.0097368"},{"-0.0001375"},{"0.0037072"},{"-0.54247"},{"0.0052632"},{"-0.62921"},{"0"},{"0"},{"1"},{"0"},{"34"},{"39"},{"-1.156"}}
	//50 um FOV (NEED calibration)
	ManCorr_Preset[3][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//25 um FOV (NEED calibration)
	ManCorr_Preset[4][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//15 um FOV (NEED calibration)
	ManCorr_Preset[5][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//10 um FOV (NEED calibration)
	ManCorr_Preset[6][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//5 um FOV (NEED calibration)
	ManCorr_Preset[7][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//3 um FOV (NEED calibration)
	ManCorr_Preset[8][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//2 um FOV (NEED calibration)
	ManCorr_Preset[9][1]={{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-3"},{"38"},{"3.5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"100"},{"100"},{"0"}}
	//User 1
	ManCorr_Preset[10][1]={{"9.5833e-05"},{"-0.0009578"},{"-0.00021823"},{"-0.0059594"},{"-1.185"},{"0.0094075"},{"-0.28281"},{"0"},{"0"},{"1"},{"0"},{"161"},{"168"},{"-1.1382"}}
	//User 2
	ManCorr_Preset[11][1]={{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"}}
	//User 3
	ManCorr_Preset[12][1]={{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"}}
	//User 4
	ManCorr_Preset[13][1]={{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"}}
	//User 5
	ManCorr_Preset[14][1]={{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"}}
	//User 6
	ManCorr_Preset[15][1]={{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"},{"0"}}
	
	Variable i
	For (i=0;i<dimsize(ManCorr_Range,0);i+=1)
		ManCorr_Range[i][2]={{"-0.0001"},{"0.0001"},{"-0.02"},{"0.01"},{"-0.0003"},{"0.0003"},{"1.00E-03"},{"1.00E-02"},{"-1"},{"1"},{"-0.02"},{"0.02"},{"-1"},{"1"},{"-10"},{"10"},{"-10"},{"10"},{"0.1"},{"2"}}
	EndFor
End

Function SLP_IXPS_MCorr()
	NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
	NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
	NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
	NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
	NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
	NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
	NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
	NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
	NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
	NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
	NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
	NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
	NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
	NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	Variable SelRow=V_Value
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
	String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
	String UMapW_Name=VolName+"_Umap1"
	String UMapW_FName=ImgVolW_FName+"_Umap1"
	String CorrW_Name=VolName+"_Corr1"
	String CorrW_FName=ImgVolW_FName+"_Corr1"
	String CMapW_Name=VolName+"_CMap1"
	String CMapW_FName=ImgVolW_FName+"_CMap1"
	Wave UMapW=$UMapW_FName
	Wave CorrW=$CorrW_FName
	Wave CMapW=$CMapW_FName
	
	Duplicate /O UMapW, root:Package_SLP:ImgXPS:UMapW_Mask /Wave=UMapW_Mask
	UMapW_Mask*=0
	UMapW_Mask+=1
	
	CorrW=SLP_Func_2DPabl2(a0,a1,b0,b1,C,d0,d1,(x-x_Offset)/mag*cos(Rot_Angle*pi/180)-(y-y_Offset)/mag*sin(Rot_Angle*pi/180),(x-x_Offset)/mag*sin(Rot_Angle*pi/180)+(y-y_Offset)/mag*cos(Rot_Angle*pi/180))*UMapW_Mask
	PosW_Ref=UMapW[PosW_P][PosW_Q]
	Variable PosW_zOffset=CorrW[PosW_P][PosW_Q]
	
	Duplicate /O CorrW,root:Package_SLP:ImgXPS:CorrW_Op /Wave=CorrW_Op
	CorrW_Op-=PosW_zOffset
	CMapW=UMapW-CorrW_Op

	Note /K CMapW,SLP_IXPS_MCorrNote2CMap()

	Killwaves CorrW_Op
End

Function SLP_IXPS_MCorrInit()
	
	String CurrentFolder=GetDataFolder(1)
	
	newDatafolder /O root:Package_SLP:ImgXPS:ManCorr
	Setdatafolder root:Package_SLP:ImgXPS:ManCorr
	Variable /G a0,a1,b0,b1,C,d0,d1,x_Offset,y_Offset,mag,Rot_Angle,PosW_p,PosW_q,PosW_Ref,MCorrMinInt,MCorrMaxInt
	String /G PresetList,PresetNote
	
	Make /T/O/N=(64,32) ManCorr_Preset
	SetDimLabel 1,0,Preset,ManCorr_Preset
	SetDimLabel 1,1,a0,ManCorr_Preset
	SetDimLabel 1,2,a1,ManCorr_Preset
	SetDimLabel 1,3,b0,ManCorr_Preset
	SetDimLabel 1,4,b1,ManCorr_Preset
	SetDimLabel 1,5,C,ManCorr_Preset
	SetDimLabel 1,6,d0,ManCorr_Preset
	SetDimLabel 1,7,d1,ManCorr_Preset
	SetDimLabel 1,8,x_Offset,ManCorr_Preset
	SetDimLabel 1,9,y_Offset,ManCorr_Preset
	SetDimLabel 1,10,mag,ManCorr_Preset
	SetDimLabel 1,11,Rot_Angle,ManCorr_Preset
	SetDimLabel 1,12,PosW_p,ManCorr_Preset
	SetDimLabel 1,13,PosW_q,ManCorr_Preset
	SetDimLabel 1,14,PosW_Ref,ManCorr_Preset
		
	Make /T/O/N=(64,64) ManCorr_Range
	SetDimLabel 1,0,Preset,ManCorr_Range
	
	SetDimLabel 1,2,a0_Min,ManCorr_Range
	SetDimLabel 1,4,a1_Min,ManCorr_Range
	SetDimLabel 1,6,b0_Min,ManCorr_Range
	SetDimLabel 1,8,b1_Min,ManCorr_Range
	SetDimLabel 1,10,C_Min,ManCorr_Range
	SetDimLabel 1,12,d0_Min,ManCorr_Range
	SetDimLabel 1,14,d1_Min,ManCorr_Range
	SetDimLabel 1,16,x_Offset_Min,ManCorr_Range
	SetDimLabel 1,18,y_Offset_Min,ManCorr_Range
	SetDimLabel 1,20,mag_Min,ManCorr_Range
	
	SetDimLabel 1,3,a0_Max,ManCorr_Range
	SetDimLabel 1,5,a1_Max,ManCorr_Range
	SetDimLabel 1,7,b0_Max,ManCorr_Range
	SetDimLabel 1,9,b1_Max,ManCorr_Range
	SetDimLabel 1,11,C_Max,ManCorr_Range
	SetDimLabel 1,13,d0_Max,ManCorr_Range
	SetDimLabel 1,15,d1_Max,ManCorr_Range
	SetDimLabel 1,17,x_Offset_Max,ManCorr_Range
	SetDimLabel 1,19,y_Offset_Max,ManCorr_Range
	SetDimLabel 1,21,mag_Max,ManCorr_Range
	
	ManCorr_Preset=""
	ManCorr_Preset[0][]={{"--"},{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-4"},{"0"},{"5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"0"},{"0"},{"0"}}
	ManCorr_Preset[1][]={{"Default"},{"7e-5"},{"5e-3"},{"-8e-4"},{"-1.5e-4"},{"0"},{"5e-3"},{"-4e-2"},{"0"},{"0"},{"1"},{"0"},{"0"},{"0"},{"0"}}
	
	ManCorr_Range=""
	ManCorr_Range[0][]={{"--"},{"<Enter note here>"},{"1e-5"},{"1e-4"},{"1e-3"},{"1e-2"},{"-1e-3"},{"-1e-4"},{"1e-3"},{"1e-2"},{"0"},{"100"},{"1e-3"},{"1e-2"},{"-1e-1"},{"-1e-2"},{"-1"},{"0"},{"10"},{"-10"},{"10"},{"0.1"},{"2"}}
	ManCorr_Range[1][]={{"Default"},{"<Enter note here>"},{"1e-5"},{"1e-4"},{"1e-3"},{"1e-2"},{"-1e-3"},{"-1e-4"},{"1e-3"},{"1e-2"},{"0"},{"100"},{"1e-3"},{"1e-2"},{"-1e-1"},{"-1e-2"},{"-1"},{"0"},{"10"},{"-10"},{"10"},{"0.1"},{"2"}}
	
	SLP_IXPS_ManCorrPresetInit()
	
	SLP_IXPS_MCorrReadPreset()
	
	SetDataFolder $CurrentFolder
End

Function /S SLP_IXPS_MCorrNote2CMap()
	String NoteStr=""
	NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
	NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
	NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
	NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
	NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
	NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
	NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
	NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
	NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
	NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
	NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
	NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
	NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
	NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
	SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
	
	String Preset_Str
	ControlInfo /W=SLP_ImgXPS_Panel_01 popup_CorrectionPreset
	If (StringMatch(S_Value,"--"))
		Preset_Str="None"
	Else
		Preset_Str=S_Value
	EndIf
	
	NoteStr+="CORRECTION SETTING\r"
	NoteStr+="Preset:"+Preset_Str+"\r\r"
	
	NoteStr+="BANANA FUNCTION COEF.\r"
	NoteStr+="a0: "+num2str(a0)+"\r"
	NoteStr+="a1: "+num2str(a1)+"\r"
	NoteStr+="b0: "+num2str(b0)+"\r"
	NoteStr+="b1: "+num2str(b1)+"\r"
	NoteStr+="C: "+num2str(C)+"\r"
	NoteStr+="d0: "+num2str(d0)+"\r"
	NoteStr+="d1: "+num2str(d1)+"\r\r"
	
	NoteStr+="CORRECTION\r"
	NoteStr+="x Offset: "+num2str(x_Offset)+"\r"
	NoteStr+="y Offset: "+num2str(y_Offset)+"\r"
	NoteStr+="Scaling: "+num2str(Mag)+"\r"
	NoteStr+="Rotation angle: "+num2str(Rot_Angle)+"\r\r"
	
	NoteStr+="REFERENCE POINT\r"
	NoteStr+="p: "+num2str(PosW_p)+"\r"
	NoteStr+="q: "+num2str(PosW_q)+"\r"
	NoteStr+="Reference z: "+num2str(PosW_Ref)+"\r"
	
	Return NoteStr
End

Function SLP_IXPS_MCorrPreset(Preset_Str)
	
	String Preset_Str

	NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
	NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
	NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
	NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
	NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
	NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
	NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
	NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
	NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
	NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
	NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
	NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
	NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
	NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
	Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
	SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
	
	//Update to ScanListW
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW 
	SLP_IXPS_ScanListW[SelRow][49]=Preset_Str
	
	//Update Global variables (Coef. for Banana function, correction, and Ref) - Sliders and SetVars follow automatically
	FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Variable PresetRow=V_Value
	a0=str2num(ManCorr_Preset[PresetRow][1])
	a1=str2num(ManCorr_Preset[PresetRow][2])
	b0=str2num(ManCorr_Preset[PresetRow][3])
	b1=str2num(ManCorr_Preset[PresetRow][4])
	C=str2num(ManCorr_Preset[PresetRow][5])
	d0=str2num(ManCorr_Preset[PresetRow][6])
	d1=str2num(ManCorr_Preset[PresetRow][7])
	x_Offset=str2num(ManCorr_Preset[PresetRow][8])
	y_Offset=str2num(ManCorr_Preset[PresetRow][9])
	mag=str2num(ManCorr_Preset[PresetRow][10])
	Rot_Angle=str2num(ManCorr_Preset[PresetRow][11])
	PosW_p=str2num(ManCorr_Preset[PresetRow][12])
	PosW_q=str2num(ManCorr_Preset[PresetRow][13])
	PosW_Ref=str2num(ManCorr_Preset[PresetRow][14])
	
	//Update slider ranges
	String WindowName="SLP_ImgXPS_MapCorr#UMap"
	If (!Stringmatch("",WinList("SLP_ImgXPS_MapCorr",";",""))) //If ImgXPS_MapCorr panel is on
		Slider Slider_a0,limits={str2num(ManCorr_Range[PresetRow][2]),str2num(ManCorr_Range[PresetRow][3]),0}
		Slider Slider_a1,limits={str2num(ManCorr_Range[PresetRow][4]),str2num(ManCorr_Range[PresetRow][5]),0}
		Slider Slider_b0,limits={str2num(ManCorr_Range[PresetRow][6]),str2num(ManCorr_Range[PresetRow][7]),0}
		Slider Slider_b1,limits={str2num(ManCorr_Range[PresetRow][8]),str2num(ManCorr_Range[PresetRow][9]),0}
		Slider Slider_C,limits={str2num(ManCorr_Range[PresetRow][10]),str2num(ManCorr_Range[PresetRow][11]),0}
		Slider Slider_d0,limits={str2num(ManCorr_Range[PresetRow][12]),str2num(ManCorr_Range[PresetRow][13]),0}
		Slider Slider_d1,limits={str2num(ManCorr_Range[PresetRow][14]),str2num(ManCorr_Range[PresetRow][15]),0}
		Slider Slider_xOffset,limits={str2num(ManCorr_Range[PresetRow][16]),str2num(ManCorr_Range[PresetRow][17]),0}
		Slider Slider_yOffset,limits={str2num(ManCorr_Range[PresetRow][18]),str2num(ManCorr_Range[PresetRow][19]),0}
		Slider Slider_Mag,limits={str2num(ManCorr_Range[PresetRow][20]),str2num(ManCorr_Range[PresetRow][21]),0}
		Slider Slider_Rot,limits={-180,180,0}
	
		String ImageName=StringFromList(0,ImageNameList(WindowName,";"))
		Cursor/P/I/W=SLP_ImgXPS_MapCorr#UMAP A $ImageName PosW_p,PosW_q
	EndIf
	
	//Update Preset Note
	PresetNote=ManCorr_Range[PresetRow][1]
	
	//Update the other PopupMenu
	PopupMenu popup_CorrectionPreset,win=SLP_ImgXPS_Panel_01,popmatch=Preset_Str
		//If ImgXPS_MapCorr panel is on
	If  (!Stringmatch("",WinList("SLP_ImgXPS_MapCorr",";",""))) 
		PopupMenu popup_CorrectionPreset2,win=SLP_ImgXPS_MapCorr,popmatch=Preset_Str
	EndIf
	
	//Correction
	SLP_IXPS_MCorr()
End

Function SetVarProc_IXPS_MCorr(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			SLP_IXPS_MCorr()
			SLP_IXPS_MCorrArbSetting()
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SliderProc_IXPS_CorrAdj(sa) : SliderControl
	STRUCT WMSliderAction &sa

	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				
				SLP_IXPS_MCorr()
				SLP_IXPS_MCorrArbSetting()
				
			endif
			break
	endswitch

	return 0
End

Function SLP_IXPS_MCorrArbSetting() //Change to "--" setting and copy current values in there
	NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
	NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
	NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
	NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
	NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
	NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
	NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
	NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
	NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
	NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
	NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
	NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
	NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
	NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
	SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
	
	Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
	ManCorr_Preset[0][1]=num2str(a0)
	ManCorr_Preset[0][2]=num2str(a1)
	ManCorr_Preset[0][3]=num2str(b0)
	ManCorr_Preset[0][4]=num2str(b1)
	ManCorr_Preset[0][5]=num2str(C)
	ManCorr_Preset[0][6]=num2str(d0)
	ManCorr_Preset[0][7]=num2str(d1)
	ManCorr_Preset[0][8]=num2str(x_Offset)
	ManCorr_Preset[0][9]=num2str(y_Offset)
	ManCorr_Preset[0][10]=num2str(Mag)
	ManCorr_Preset[0][11]=num2str(Rot_Angle)
	ManCorr_Preset[0][12]=num2str(PosW_p)
	ManCorr_Preset[0][13]=num2str(PosW_q)
	ManCorr_Preset[0][14]=num2str(PosW_Ref)
	
	//Check current range, then copy to "--"
	ControlInfo /W=SLP_ImgXPS_Panel_01 popup_CorrectionPreset
	String Preset_Str=S_Value
	FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Variable PresetRow=V_Value
	ManCorr_Range[0][2,63]=ManCorr_Range[PresetRow][q]
	
	//Update Preset PopupMenus
	PopupMenu popup_CorrectionPreset,win=SLP_ImgXPS_Panel_01,popmatch="--"
		//If ImgXPS_MapCorr panel is on
	If  (!Stringmatch("",WinList("SLP_ImgXPS_MapCorr",";",""))) 
		PopupMenu popup_CorrectionPreset2,win=SLP_ImgXPS_MapCorr,popmatch="--"
	EndIf
	
	//Update to ScanListW
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW 
	SLP_IXPS_ScanListW[SelRow][49]="--"
	
	//Update Preset Note to "--"'s
	PresetNote=ManCorr_Range[0][1]
End

Function ButtonProc_IXPS_MCorr(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
			NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
			NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
			NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
			NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
			NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
			NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
			NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
			NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
			NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
			NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
			NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
			NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
			NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
			SVAR PresetList=root:Package_SLP:ImgXPS:ManCorr:PresetList
			SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			Variable SelRow=V_Value
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
			String UMapW_Name=VolName+"_Umap1"
			String UMapW_FName=ImgVolW_FName+"_Umap1"
			String CorrW_Name=VolName+"_Corr1"
			String CorrW_FName=ImgVolW_FName+"_Corr1"
			String CMapW_Name=VolName+"_CMap1"
			String CMapW_FName=ImgVolW_FName+"_CMap1"
			Wave UMapW=$UMapW_FName
			Wave CorrW=$CorrW_FName
			Wave CMapW=$CMapW_FName

			ControlInfo /W=SLP_ImgXPS_MapCorr popup_CorrectionPreset2
			String Preset_Str=S_Value
			FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Variable PresetRow=V_Value
			Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
			
			strswitch(ba.CtrlName)	// string switch
				case "Button_Done":		// execute if case matches expression
					DoWindow /K SLP_ImgXPS_MapCorr
					break
				case "Button_Offset_Zero":		// execute if case matches expression
					x_Offset=0
					y_Offset=0
					mag=1
					Rot_Angle=0
					SLP_IXPS_MCorr()
					SLP_IXPS_MCorrArbSetting()
					break
				case "button_AutoFit":
					Make /O/N=7 root:Package_SLP:ImgXPS:ManCorr:AutoFitCoefW /Wave=AutoFitCoefW
					AutoFitCoefW={a0,a1,b0,b1,C,d0,d1}
					FuncFitMD /NTHR=0 SLP_FitFunc_2DPabl2 AutoFitCoefW UMapW  /D=$CorrW_FName
					a0=AutoFitCoefW[0]
					a1=AutoFitCoefW[1]
					b0=AutoFitCoefW[2]
					b1=AutoFitCoefW[3]
					C=AutoFitCoefW[4]
					d0=AutoFitCoefW[5]
					d1=AutoFitCoefW[6]
					
					X_Offset=0
					Y_Offset=0
					Mag=1
					Rot_Angle=0
					
					SLP_IXPS_MCorr()
					SLP_IXPS_MCorrArbSetting()
					Break
				case "button_LoadPreset":
					DoAlert 0,"Select Preset file"
					LoadWave /O/J /M  /K=2 /N=NewPreset /U={0,0,0,0} /L={0,0,65,0,32}
					If (V_Flag)
						//Start loading the file, then copy the preset (omit the '--' preset). The current setting is moved to "--"
						String NewPresetWaveName=stringfromlist(0,S_Wavenames)
						Wave /T NewPresetWave=$NewPresetWaveName
						ManCorr_Preset[1,63][]=NewPresetWave[p+1][q] //Only copy 'Preset' and not '--'
						DoAlert 0,"Select Preset RANGE file"
						LoadWave /O/J /M  /K=2 /N=NewPresetRange /U={0,0,0,0} /L={0,0,65,0,64}
						String NewRangeWaveName=stringfromlist(0,S_Wavenames)
						Wave /T NewRangeWave=$NewRangeWaveName
						ManCorr_Range[1,63][]=NewRangeWave[p+1][q]
						Killwaves NewPresetWave
						Killwaves NewRangeWave
						
						SLP_IXPS_MCorrReadPreset()
						SLP_IXPS_MCorrArbSetting()
					EndIf
					Break
				case "button_Save2Preset":
					String Save2Preset_Select=""
					String Save2PresetList=RemoveEnding(removefromlist("\"--",PresetList),"\"")
					prompt Save2Preset_Select, "Select preset to save to:", popup Save2PresetList	// prompt for input wave
					doprompt "Save coef. values to preset", Save2Preset_Select
					if(V_flag==0)
						FindValue /TEXT=Save2Preset_Select /TXOP=6 ManCorr_Preset
						Variable Save_PresetRow=V_Value
						ManCorr_Preset[Save_PresetRow][1]={{num2str(a0)},{num2str(a1)},{num2str(b0)},{num2str(b1)},{num2str(C)},{num2str(d0)},{num2str(d1)},{num2str(x_Offset)},{num2str(y_Offset)},{num2str(Mag)},{num2str(Rot_Angle)},{num2str(PosW_p)},{num2str(PosW_q)},{num2str(PosW_Ref)}}
						ManCorr_Range[Save_PresetRow][1,21]=ManCorr_Range[PresetRow][q]
						PopupMenu popup_CorrectionPreset2,win=SLP_ImgXPS_MapCorr,popmatch=Save2Preset_Select
						PopupMenu popup_CorrectionPreset,win=SLP_ImgXPS_Panel_01,popmatch=Save2Preset_Select
					endif
					break
				case "button_SavePreset":
					String PresetFileName="Isochrome_Preset"
					Save/G /I /U={0,0,1,0} /M="\n" ManCorr_Preset as PresetFileName
					PresetFileName="Isochrome_Range"
					Save/G /I /U={0,0,1,0} /M="\n" ManCorr_Range as PresetFileName
					break
				
//				case "button_AdjRefPoint":
//					PosW_p=pCsr(A,"SLP_ImgXPS_MapCorr#UMap") 
//					PosW_q=qCsr(A,"SLP_ImgXPS_MapCorr#UMap")
//					SLP_IXPS_MCorr()
//					Break
				
				default:							// optional default expression executed
			endswitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function ButtonProc_IXPS_IsoC_Range(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				Variable Column=0
				String Param_Name=""
				String Ctrl_Name=""
				case "Button_Range_a0":		// execute if case matches expression
					Column=1
					Param_Name="a0"
					Ctrl_Name="Slider_a0"
					break
				case "Button_Range_a1":		// execute if case matches expression
					Column=2
					Param_Name="a1"
					Ctrl_Name="Slider_a1"
					break
				case "Button_Range_b0":		// execute if case matches expression
					Column=3
					Param_Name="b0"
					Ctrl_Name="Slider_b0"
					break
				case "Button_Range_b1":		// execute if case matches expression
					Column=4
					Param_Name="b1"
					Ctrl_Name="Slider_b1"
					break
				case "Button_Range_C":		// execute if case matches expression
					Column=5
					Param_Name="C"
					Ctrl_Name="Slider_C"
					break
				case "Button_Range_d0":		// execute if case matches expression
					Column=6
					Param_Name="d0"
					Ctrl_Name="Slider_d0"
					break
				case "Button_Range_d1":		// execute if case matches expression
					Column=7
					Param_Name="d1"
					Ctrl_Name="Slider_d1"
					break
				case "Button_Range_x_Offset":		// execute if case matches expression
					Column=8
					Param_Name="x_Offset"
					Ctrl_Name="Slider_xOffset"
					break
				case "Button_Range_y_Offset":		// execute if case matches expression
					Column=9
					Param_Name="y_Offset"
					Ctrl_Name="Slider_yOffset"
					break
				case "Button_Range_mag":		// execute if case matches expression
					Column=10
					Param_Name="mag"
					Ctrl_Name="Slider_Mag"
					break
				default:							// optional default expression executed
					
			endswitch
			
			Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
			
			ControlInfo /W=SLP_ImgXPS_MapCorr popup_CorrectionPreset2
			String Preset_Str=S_Value
			FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Variable PresetRow=V_Value
			
			Variable Min_Val=str2num(ManCorr_Range[PresetRow][Column*2])
			Variable Max_Val=str2num(ManCorr_Range[PresetRow][Column*2+1])
			Prompt Min_Val,"Min "+Param_Name+": "
			Prompt Max_Val,"Max "+Param_Name+": "
			DoPrompt "Enter new range ",Min_Val,Max_Val
			
			If (V_Flag==0)
				ManCorr_Range[PresetRow][Column*2]=num2str(Min_Val)
				ManCorr_Range[PresetRow][Column*2+1]=num2str(Max_Val)
				Slider $Ctrl_Name limits={Min_Val,Max_Val,0}
			Endif
			
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_MCorrReadPreset()
	Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
	Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
	SVAR PresetList=root:Package_SLP:ImgXPS:ManCorr:PresetList
	SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
	
	Variable i=0
	String quote = "\""
	PresetList=quote
	Do
		PresetList+=ManCorr_Preset[i][0]+";"
		i+=1
	While (!stringmatch(ManCorr_Preset[i][0],"")&&i<dimsize(ManCorr_Preset,0))
	
	PresetList+=quote
	
End



Function PopMenuProc_IXPS_ManCorrPreset(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			
			SLP_IXPS_MCorrPreset(popStr)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_IXPS_MCorrColorScale(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR MCorrMinInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMinInt
			NVAR MCorrMaxInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMaxInt
			
			String ImageName=""
			String WindowName=""
			
			WindowName="SLP_ImgXPS_MapCorr#UMap"
			ImageName=StringFromList(0,ImageNameList(WindowName,";"))
			ModifyImage /W=$WindowName $ImageName ctab={MCorrMinInt,MCorrMaxInt,rainbow,0}
			WindowName="SLP_ImgXPS_MapCorr#Corr"
			ImageName=StringFromList(0,ImageNameList(WindowName,";"))
			ModifyImage /W=$WindowName $ImageName ctab={MCorrMinInt,MCorrMaxInt,rainbow,0}
			WindowName="SLP_ImgXPS_MapCorr#CMap"
			ImageName=StringFromList(0,ImageNameList(WindowName,";"))
			ModifyImage /W=$WindowName $ImageName ctab={MCorrMinInt,MCorrMaxInt,rainbow,0}
			
			//Update the new color range to main ImgXPS panel
			SLP_IXPS_MCorrCopyMCorrColor()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_IXPS_MCorrNote(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			ControlInfo /W=SLP_ImgXPS_MapCorr popup_CorrectionPreset2
			String Preset_Str=S_Value
			FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Variable PresetRow=V_Value
			
			Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
			ManCorr_Range[PresetRow][1]=sval
			
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_MCorrCursorHook(s) //HOOK FUNCTION to see spectrum at different (x,y) by moving a cursor

	STRUCT WMWinHookStruct &s
	Variable hookResult = 0

		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_ImgXPS_MapCorr activeSW
				String activeSubwindow = S_value
				
				NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
				NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
				NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
				
				//Hook for Reference p,q and z update
				// If the UMAP display is selected and there is cursor A on it.
				if (CmpStr(activeSubwindow,"SLP_ImgXPS_MapCorr#UMAP") == 0&&!stringmatch("",CsrInfo(A,"SLP_ImgXPS_MapCorr#UMAP")))
					PosW_p=pCsr(A,"SLP_ImgXPS_MapCorr#UMap") 
					PosW_q=qCsr(A,"SLP_ImgXPS_MapCorr#UMap")
					SLP_IXPS_MCorr()
					
					//Update new p an q ref. point
					ControlInfo /W=SLP_ImgXPS_MapCorr popup_CorrectionPreset2
					String Preset_Str=S_Value
					FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
					Variable PresetRow=V_Value
					Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
					ManCorr_Preset[PresetRow][12]=num2str(PosW_p)
					ManCorr_Preset[PresetRow][13]=num2str(PosW_q)
					ManCorr_Preset[PresetRow][14]=num2str(PosW_Ref)
					
				EndIf
			break
		endswitch

	return hookResult		// 0 if nothing done, else 1
End

Function SLP_IXPS_MCorrCopyUMapColor()
	NVAR MCorrMinInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMinInt
	NVAR MCorrMaxInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMaxInt
	
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Variable i=0	
	For (i=0;i<dimsize(FitCoefDisplaySelW,0);i+=1)
		If (FitCoefDisplaySelW[i][9]==48)
			MCorrMinInt=str2num(FitCoefDisplayW[i][10])
			MCorrMaxInt=str2num(FitCoefDisplayW[i][11])
		EndIf
	EndFor
End

Function SLP_IXPS_MCorrCopyMCorrColor()
	NVAR MCorrMinInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMinInt
	NVAR MCorrMaxInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMaxInt
	
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
	String ImgVolW_FName=DataFolder_FName+VolName
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Variable i=0	
	For (i=0;i<dimsize(FitCoefDisplaySelW,0);i+=1)
		If (FitCoefDisplaySelW[i][9]==48)
			FitCoefDisplayW[i][10]=num2str(MCorrMinInt)
			FitCoefDisplayW[i][11]=num2str(MCorrMaxInt)
		EndIf
	EndFor
	
	SLP_IXPS_DisplaySelectedData(VolName)
End

Function CheckProc_IXPS_DispPeakAssign(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SLP_IXPS_DispPeakAssign(0)
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			SLP_IXPS_ScanListW[SelRow][40]=num2str(checked)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_DispPeakAssign(CursorHook_Flg)
	variable CursorHook_Flg //Whether to use CursorHook or not
	
	variable BE_Window=2 //eV //[TODO] should be able to change in SETTINGS
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_BE
	Variable BE_Flg=V_Value
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_PeakAssign1
	Variable  PeakAssign_Flg=V_Value
	Variable BE_Pos=0
	Variable X_Pos=0
	
	Wave /T SLP_IXPS_XPSParamW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamW
	variable STV_Begin=str2num(SLP_IXPS_XPSParamW[0][1])
	variable STV_End=str2num(SLP_IXPS_XPSParamW[1][1])
	variable hv=str2num(SLP_IXPS_XPSParamW[3][1])
	variable aWF=str2num(SLP_IXPS_XPSParamW[4][1])
	Variable MidBE=hv-aWF-(STV_Begin+STV_End)/2
	
	If (PeakAssign_Flg)
		Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW		
		String VolName=SLP_IXPS_ScanListW[SelRow][0]
		
		String TraceName=""
		//Check whether the x-scale is BE or KE
		If (BE_Flg) //BE is used
			TraceName=VolName+"_zProflBE"
		Else //KE is used - change KE to BE
			TraceName=VolName+"_zProfl"
		Endif
		
		If (Numtype(BE_Pos)==2) //checked whether cursor position has been recorded
			SLP_IXPS_ScanListW[SelRow][41]=num2str(MidBE)
		EndIf

		If (!CursorHook_Flg) //If not used in cursor hook = change the cursor to the position
			If (BE_Flg==1)
				X_Pos=str2num(SLP_IXPS_ScanListW[SelRow][41])
			else
				X_Pos=hv-aWF-str2num(SLP_IXPS_ScanListW[SelRow][41])
			EndIf
			Cursor /W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN A $TraceName X_Pos
		Endif

		X_Pos=xcsr(A,"SLP_ImgXPS_Panel_01#IX_FITTINGWIN")
		Variable KE_Pos=0
		
		If (BE_Flg==1) //BE is used
			BE_Pos=X_Pos
			KE_Pos=hv-X_Pos-aWF
		Else //KE is used - change KE to BE
			BE_Pos=hv-X_Pos-aWF //convert to BE before looking up the BE table
			KE_Pos=X_Pos
		Endif
		
		SLP_IXPS_ScanListW[SelRow][41]=num2str(BE_Pos)
		TextBox /C/W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /N=PeakAssignment1  SLP_Util_FindElement(BE_Pos,BE_Window)
		TextBox /A=LT /C/W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /N=PeakAssignment2  SLP_Util_FindAuger(KE_Pos,BE_Window)
	Else
		Cursor /K/W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN A
		TextBox/K/W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /N=PeakAssignment1	
		TextBox/K/W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /N=PeakAssignment2			
	EndIf

End



Function ButtonProc_IXPS_AutoCorr(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0] 
			
			SLP_IXPS_GenIsoChrom(VolName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_IXPS_Isochrome(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR Iso_a1=root:Package_SLP:ImgXPS:Iso_a1
			NVAR Iso_b1=root:Package_SLP:ImgXPS:Iso_b1
			NVAR Iso_a2=root:Package_SLP:ImgXPS:Iso_a2
			NVAR Iso_b2=root:Package_SLP:ImgXPS:Iso_b2
			NVAR Iso_C=root:Package_SLP:ImgXPS:Iso_C
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			Variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
			String Corr1_FName=ImgVolW_FName+"_Corr1"
			Wave Corr1=$Corr1_FName
			
			SLP_IXPS_ScanListW[SelRow][49]=num2str(Iso_a1)
			SLP_IXPS_ScanListW[SelRow][50]=num2str(Iso_b1)
			SLP_IXPS_ScanListW[SelRow][51]=num2str(Iso_a2)
			SLP_IXPS_ScanListW[SelRow][52]=num2str(Iso_b2)
			SLP_IXPS_ScanListW[SelRow][53]=num2str(Iso_C)
			
			//SLP_IXPS_GenIsoChrom(VolName)
			Corr1=Iso_a1*x^2+Iso_b1*x+Iso_C+Iso_a2*y^2+Iso_b2*y
			
			SLP_IXPS_CorrectMap()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_CorrectMap()
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	Variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
	NVAR CorrAdj_x1=root:Package_SLP:ImgXPS:CorrAdj_x1
	NVAR CorrAdj_y1=root:Package_SLP:ImgXPS:CorrAdj_y1
	NVAR CorrAdj_mag1=root:Package_SLP:ImgXPS:CorrAdj_mag1
	NVAR CorrAdj_Size1=root:Package_SLP:ImgXPS:CorrAdj_Size1
	NVAR CorrAdj_Rot1=root:Package_SLP:ImgXPS:CorrAdj_Rot1
	
 	SLP_IXPS_Correct2(VolName,CorrAdj_x1,CorrAdj_y1,CorrAdj_mag1,CorrAdj_Size1,CorrAdj_Rot1)
End

//Old version..

//Function SLP_IXPS_GenIsoChrom(VolName)
//	string VolName
//	
//	Variable DataRow=SLP_IXPS_FindDataRow(VolName)
//	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
//	string ImgVolW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
//	String ImgIntgW_FName=ImgVolW_FName+"_Intg"
//	String BxW_FName=ImgVolW_FName+"_BX"
//	String ByW_FName=ImgVolW_FName+"_BY"
//	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
//	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"
//	String Corr1_FName=ImgVolW_FName+"_Corr1"
//	String Corr1H_FName=ImgVolW_FName+"_Corr1H"
//	String CMap1_FName=ImgVolW_FName+"_CMap1"
//	String CMap1H_FName=ImgVolW_FName+"_CMap1H"
//	String MapVolW_FName=ImgVolW_FName+"_MapVol"
//	
//	NVAR Iso_a1=root:Package_SLP:ImgXPS:Iso_a1
//	NVAR Iso_b1=root:Package_SLP:ImgXPS:Iso_b1
//	NVAR Iso_a2=root:Package_SLP:ImgXPS:Iso_a2
//	NVAR Iso_b2=root:Package_SLP:ImgXPS:Iso_b2
//	NVAR Iso_C=root:Package_SLP:ImgXPS:Iso_C
//
//	
//	Wave UnprocMap1=$UnprocMap1_FName
//	duplicate /O $UnprocMap1_FName,$Corr1_FName /Wave=Corr1
//
//	make /O/N=5 twoDParabolic_CoefW
//	twoDParabolic_CoefW=1
//	
//	FuncFitMD/NTHR=0/TBOX=768 TwoD_Parabolic twoDParabolic_CoefW UnprocMap1  /D 
//	
//	Iso_a1=twoDParabolic_CoefW[0]
//	Iso_b1=twoDParabolic_CoefW[1]
//	Iso_C=twoDParabolic_CoefW[2]
//	Iso_a2=twoDParabolic_CoefW[3]
//	Iso_b2=twoDParabolic_CoefW[4]
//	
//	SLP_IXPS_ScanListW[DataRow][49]=num2str(Iso_a1)
//	SLP_IXPS_ScanListW[DataRow][50]=num2str(Iso_b1)
//	SLP_IXPS_ScanListW[DataRow][51]=num2str(Iso_a2)
//	SLP_IXPS_ScanListW[DataRow][52]=num2str(Iso_b2)
//	SLP_IXPS_ScanListW[DataRow][53]=num2str(Iso_C)
//	
//	killwaves twoDParabolic_CoefW
//	
//	Corr1=Iso_a1*x^2+Iso_b1*x+Iso_C+Iso_a2*y^2+Iso_b2*y
//	
//	
//End

Function SLP_IXPS_GenIsoChrom(VolName)
	string VolName
	
	Variable DataRow=SLP_IXPS_FindDataRow(VolName)
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	string ImgVolW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
	String ImgIntgW_FName=ImgVolW_FName+"_Intg"
	String BxW_FName=ImgVolW_FName+"_BX"
	String ByW_FName=ImgVolW_FName+"_BY"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"
	String Corr1_FName=ImgVolW_FName+"_Corr1"
	String Corr1H_FName=ImgVolW_FName+"_Corr1H"
	String CMap1_FName=ImgVolW_FName+"_CMap1"
	String CMap1H_FName=ImgVolW_FName+"_CMap1H"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	
	NVAR Iso_a1=root:Package_SLP:ImgXPS:Iso_a1
	NVAR Iso_b1=root:Package_SLP:ImgXPS:Iso_b1
	NVAR Iso_a2=root:Package_SLP:ImgXPS:Iso_a2
	NVAR Iso_b2=root:Package_SLP:ImgXPS:Iso_b2
	NVAR Iso_C=root:Package_SLP:ImgXPS:Iso_C

	
	Wave UnprocMap1=$UnprocMap1_FName
	duplicate /O $UnprocMap1_FName,$Corr1_FName /Wave=Corr1

	make /O/N=7 twoDParabolic_CoefW
	twoDParabolic_CoefW={7.60519e-06,0.00490413,-0.000352412,-0.00153916,-0.333898,0.00265108,0.0656613}
	
	FuncFitMD /NTHR=0/TBOX=768 SLP_FitFunc_2DPabl2 twoDParabolic_CoefW UnprocMap1  /D 
	
	Iso_a1=twoDParabolic_CoefW[0]
	Iso_b1=twoDParabolic_CoefW[1]
	Iso_C=twoDParabolic_CoefW[2]
	Iso_a2=twoDParabolic_CoefW[3]
	Iso_b2=twoDParabolic_CoefW[4]
	
	SLP_IXPS_ScanListW[DataRow][49]=num2str(Iso_a1)
	SLP_IXPS_ScanListW[DataRow][50]=num2str(Iso_b1)
	SLP_IXPS_ScanListW[DataRow][51]=num2str(Iso_a2)
	SLP_IXPS_ScanListW[DataRow][52]=num2str(Iso_b2)
	SLP_IXPS_ScanListW[DataRow][53]=num2str(Iso_C)
	
	Corr1=SLP_Func_2DPabl2(twoDParabolic_CoefW[0],twoDParabolic_CoefW[1],twoDParabolic_CoefW[2],twoDParabolic_CoefW[3],twoDParabolic_CoefW[4],twoDParabolic_CoefW[5],twoDParabolic_CoefW[6],x,y)
	
	killwaves twoDParabolic_CoefW
	
End

Function SLP_FitFunc_2DSkewedPblc(w,x,y) : FitFunc
	Wave w
	Variable x
	Variable y

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x,y) = SLP_Func_2DSkewedPblc(a0,a1,a2,a3,b0,b1,b2,b3,ab0,ab1,ab2,C,x,y)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 2
	//CurveFitDialog/ x
	//CurveFitDialog/ y
	//CurveFitDialog/ Coefficients 12
	//CurveFitDialog/ w[0] = a0
	//CurveFitDialog/ w[1] = a1
	//CurveFitDialog/ w[2] = a2
	//CurveFitDialog/ w[3] = a3
	//CurveFitDialog/ w[4] = b0
	//CurveFitDialog/ w[5] = b1
	//CurveFitDialog/ w[6] = b2
	//CurveFitDialog/ w[7] = b3
	//CurveFitDialog/ w[8] = ab0
	//CurveFitDialog/ w[9] = ab1
	//CurveFitDialog/ w[10] = ab2
	//CurveFitDialog/ w[11] = C

	return SLP_Func_2DSkewedPblc(w[0],w[1],w[2],w[3],w[4],w[5],w[6],w[7],w[8],w[9],w[10],w[11],x,y)
End

Function SLP_Func_2DSkewedPblc(a0,a1,a2,a3,b0,b1,b2,b3,ab0,ab1,ab2,C,x,y)
	variable a0,a1,a2,a3,b0,b1,b2,b3,ab0,ab1,ab2,C,x,y
	
	Variable Result=a0*x^4+a1*x^3+a2*x^2+a1*x+b0*y^4+b1*y^3+b2*y^2+b3*y+ab0*x^2*y+ab1*x*y^2+ab2*x*y+C
	
	Return Result
End

Function SLP_Func_2DPabl2(a0,a1,b0,b1,C,d0,d1,x,y)
	variable a0,a1,b0,b1,C,d0,d1,x,y
	
	Return a0*x^2+a1*x+b0*(y-d0*x^2-d1*x)^2+b1*y+C

End

Function SLP_FitFunc_2DPabl2(w,x,y) : FitFunc
	Wave w
	Variable x
	Variable y

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x,y) = SLP_Util_Func_2DPabl2(a0,a1,b0,b1,C,d0,d1,x,y)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 2
	//CurveFitDialog/ x
	//CurveFitDialog/ y
	//CurveFitDialog/ Coefficients 7
	//CurveFitDialog/ w[0] = a0
	//CurveFitDialog/ w[1] = a1
	//CurveFitDialog/ w[2] = b0
	//CurveFitDialog/ w[3] = b1
	//CurveFitDialog/ w[4] = C
	//CurveFitDialog/ w[5] = d0
	//CurveFitDialog/ w[6] = d1

	return SLP_Func_2DPabl2(w[0],w[1],w[2],w[3],w[4],w[5],w[6],x,y)
End

Function TwoD_Parabolic(w,x,y) : FitFunc
	Wave w
	Variable x
	Variable y

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x,y) = a1*x^2+b1*x+C+a2*y^2+b2*y+C
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 2
	//CurveFitDialog/ x
	//CurveFitDialog/ y
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = a1
	//CurveFitDialog/ w[1] = b1
	//CurveFitDialog/ w[2] = C
	//CurveFitDialog/ w[3] = a2
	//CurveFitDialog/ w[4] = b2

	return w[0]*x^2+w[1]*x+w[2]+w[3]*y^2+w[4]*y+w[2]
End

Function CheckProc_IXPS_SelImage(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow
			
			strswitch (cba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "CheckBox_SelImg1":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt1"
					break
				case "CheckBox_SelImg2":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt2"
					break
				case "CheckBox_SelImg3":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt3"
					break
				case "CheckBox_SelImg4":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt4"
					break
				case "CheckBox_SelImg5":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt5"
					break
				case "CheckBox_SelImg6":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt6"
					break
				case "CheckBox_SelImgCorr":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_Correction1"
					break
				case "CheckBox_SelImgCMap":
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_ResultMap1"
					break
			endswitch
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			//Waves and wave refs.
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			
			SLP_IXPS_ScanListW[SelRow][47]=SelSubWindow
			
			SLP_IXPS_SelectImage(SelSubWindow)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End




Function ButtonProc_IXPS_SelAll(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
			
			SLP_IXPS_ScanListDisplaySelW[][0]=48
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_SelNone(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
			
			SLP_IXPS_ScanListDisplaySelW[][0]=32
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_ClearDisplay()
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_RawExt1")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_RawExt2")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_RawExt3")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_RawExt4")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_RawExt5")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_RawExt6")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_Correction1")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_ResultMap1")
	SLP_Util_RemoveAllImages("SLP_ImgXPS_Panel_01#IX_IMGW")
	
	SLP_Util_RemoveAllTraces("SLP_ImgXPS_Panel_01#IX_IMGW")
	SLP_Util_RemoveAllTraces("SLP_ImgXPS_Panel_01#IX_FITTINGWIN")
	SLP_Util_RemoveAllTraces("SLP_ImgXPS_Panel_01#IX_HISTOGRAM")

	ListBox List_FitParam Win=SLP_ImgXPS_Panel_01,ListWave=root:Package_SLP:ImgXPS:SLP_IXPS_FitParamW
End

Function SLP_IXPS_DelScan(VolName)
	String VolName
	
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	
	FindValue /TEXT=VolName /TXOP=6 SLP_IXPS_ScanListW
	variable col=floor(V_value/dimsize(SLP_IXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_IXPS_ScanListW,0)
	
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk" 
	String zProfFitW_FName=SLP_IXPS_ScanListW[DataRow][1]+"Fit_"+SLP_IXPS_ScanListW[DataRow][0]+"_zProfl"
	String ZProfBEW_FName=ImgVolW_FName+"_zProflBE"
	String ZProfMskBEW_FName=ImgVolW_FName+"_zPMskBE" 
	String zProfFitBEW_FName=zProfFitW_FName+"BE"
	
	//Remove dependency before deletion
	If (exists(ZProfW_FName))
		SetFormula $ZProfW_FName,""
	EndIf
	If (exists(ZProfMskW_FName))
		SetFormula $ZProfMskW_FName,""
	EndIf
	If (exists(ZProfMskW_FName))
		SetFormula $ZProfMskW_FName,""
	EndIf
	If (exists(zProfFitW_FName))
		SetFormula $zProfFitW_FName,""
	EndIf
	If (exists(ZProfBEW_FName))
		SetFormula $ZProfBEW_FName,""
	EndIf
	If (exists(ZProfMskBEW_FName))
		SetFormula $ZProfMskBEW_FName,""
	EndIf
	If (exists(ZProfMskW_FName))
		SetFormula $ZProfMskW_FName,""
	EndIf
	If (exists(zProfFitBEW_FName))
		SetFormula $zProfFitBEW_FName,""
	EndIf
	
	//Remove data folder
	killDataFolder /Z $DataFolder_FName
	variable DeleteImgError_Flg=V_Flag
	
	if (DeleteImgError_Flg==0) 
		//Only update ScanListW if Image folder can be deleted
		DeletePoints DataRow,1, SLP_IXPS_ScanListW
		DeletePoints DataRow,1, SLP_IXPS_ScanListDisplayW
		DeletePoints DataRow,1, SLP_IXPS_ScanListDisplaySelW
	Endif
	Return DeleteImgError_Flg
End

Function SLP_Util_AutoImgInt(GraphNameStr)
	String GraphNameStr
	
	String ImgNameListStr=ImageNameList(GraphNameStr,";")
	String ImgNameStr=StringFromList(0,ImgNameListStr) //1st image name
	
	Wave ImgW=ImageNameToWaveRef(GraphNameStr,ImgNameStr)
	
	Duplicate /O ImgW,ImgW_Tmp
	
	MatrixFilter median ImgW_Tmp //Remove speckle noise
	
	WaveStats /Q ImgW_Tmp
	
	ModifyImage /W=$GraphNameStr $ImgNameStr,ctab={V_avg-1.0*V_sdev,V_avg+1.0*V_sdev,,0}
End

Function SLP_Util_FindZRange(ImgW_FName,MskW_FName)
	String ImgW_FName,MskW_FName //Img and MskW must have identical sizes
	
	Wave ImgW=$ImgW_FName
	Wave MskW=$MskW_FName
	
	variable i,j
	variable MaxInt=ImgW[0][0]
	variable MinInt=ImgW[0][0]
	
	For (i=0;i<dimsize(ImgW,0);i+=1)
		For (j=0;j<dimsize(ImgW,1);j+=1)
			If (MskW[i][j])
				If (ImgW[i][j]>MaxInt)
					MaxInt=ImgW[i][j]
				EndIf
				If (ImgW[i][j]<MinInt)
					MinInt=ImgW[i][j]
				EndIf
			EndIF
		EndFor
	EndFor
	Print "Max z ="+num2str(MaxInt)
	Print "Min z ="+num2str(MinInt)
End

Function SLP_Util_RemoveOverLimZ(ImgW_FName,zMin,zMax)
	String ImgW_FName
	Variable zMin,zMax
	
	Wave ImgW=$ImgW_FName
	
	variable i,j
	
	
	For (i=0;i<dimsize(ImgW,0);i+=1)
		For (j=0;j<dimsize(ImgW,1);j+=1)
			If (ImgW[i][j]>zMax)
				ImgW[i][j]=zMax
			EndIf
			If (ImgW[i][j]<zMin)
				ImgW[i][j]=zMin
			EndIf
		EndFor
	EndFor
End

Function SLP_Util_ImgBG2NaN(ImgW_FName,BG_Th)
	//If any pixel has value < BG_Th => Change the pixel value to NaN 
	//(Helpful for doing ImgW stat (WaveStats) w/o counting the BG area
	String ImgW_FName 
	Variable BG_Th
	
	Wave ImgW=$ImgW_FName
	
	variable i,j
	
	For (i=0;i<dimsize(ImgW,0);i+=1)
		For (j=0;j<dimsize(ImgW,1);j+=1)
		
			If (ImgW[i][j]<BG_Th)
				ImgW[i][j]=NaN
			EndIF
		EndFor
	EndFor
End



Function ListBoxProc_IXPS_ParamList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	variable SelRow
	String VolName
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			VolName=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String GLAParamGssW_FName=ImgVolW_FName+"_GLAParamGss"
			String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
			
			Wave GLAParamGssW=$GLAParamGssW_FName
			Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 Popup_FitType
			String FitName=S_Value
			String FitMode=SLP_IXPS_ScanListW[SelRow][17]
			String BG_Type=SLP_IXPS_ScanListW[SelRow][8]
			Variable N_Peaks=str2num(SLP_IXPS_ScanListW[SelRow][48])
			Variable OffsetRow=0
			If (StringMatch(FitMode,"Reverse GLAs Peaks (XPS)"))
				strswitch(BG_Type)	// string switch
					case "None":	// execute if case matches expression
					case "Linear":
					case "Shirley":
						OffsetRow=0
						break
					case "Flat":
						OffsetRow=1
						break
					case "Slope":
						OffsetRow=2
						break
					case "ERF":	//SLP_Func_StohrERF(FlatBG,StepHeight,StepPos,Width,Decay,E)
					case "atan":
						OffsetRow=5
						break
				endswitch
				Variable i=0
				Variable j=0
				For (i=0;i<(5*N_Peaks);i+=1)
					//For (j=0;j<5;j+=1)
						//GLAParamGssW[5*i+j]=str2num(FitCoefDisplayW[5*i+j+OffsetRow][4])
						GLAParamGssW[i]=str2num(FitCoefDisplayW[i+OffsetRow][4])
					//EndFor
				EndFor
			EndIf
			DoUpdate
			SLP_IXPS_MakeGuessCurve2(VolName)
			DoUpdate
			SLP_IXPS_DisplaySelectedData(VolName)
			
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			VolName=SLP_IXPS_ScanListW[SelRow][0]
			SLP_IXPS_DispChk(VolName) //Alert when user select more than one map for correction.
			variable Bin=str2num(SLP_IXPS_ScanListW[SelRow][16])
			
			SLP_IXPS_CreateUMap(VolName,Bin)
			
			SLP_IXPS_DisplaySelectedData(VolName)
			
			//Use SelectImage function to auto adjust the intensity
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_RawExt1")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_RawExt2")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_RawExt3")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_RawExt4")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_RawExt5")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_RawExt6")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_Correction1")
			SLP_IXPS_SelectImage("SLP_ImgXPS_Panel_01#IX_ResultMap1")
			
			SLP_IXPS_ScanListW[SelRow][20]=num2str(SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_ResultMap1","Min"))
			SLP_IXPS_ScanListW[SelRow][21]=num2str(SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_ResultMap1","Max"))
			
			SLP_IXPS_DisplaySelectedData(VolName)
			
			break
	endswitch

	return 0
End

Function SLP_Util_AutoColor(DisplayName,Option)
	String DisplayName
	String Option //Option = "Min","Max","Change"
	Variable ColorVal=0
	
	String ImageList=""
	String ImageName=""
	ImageList=ImageNameList(DisplayName,";")
	ImageName=StringFromList(0,ImageList,";")
	Wave MapW=ImageNametoWaveRef(DisplayName,ImageName)
	String MapW_FName=GetWavesDataFolder(MapW,2) //Full name of the imgW
	
	If(WaveDims(MapW)>2) //If the wave is a 3D volume
		String FindPlaneText=imageInfo(DisplayName,ImageName,0)
		Variable Plane=str2num(StringByKey("Plane",FindPlaneText,"=",";"))
		
		Duplicate /O/R=[][][Plane] MapW,root:Package_SLP:ImgXPS:AutoColorTempImage /Wave=AutoColorTempImage
	
	Else
		Duplicate /O MapW,root:Package_SLP:ImgXPS:AutoColorTempImage /Wave=AutoColorTempImage
	EndIf

	Variable MedianInt=SLP_Util_FindImgMedian("root:Package_SLP:ImgXPS:AutoColorTempImage",0)
	Variable Q25Int=SLP_Util_FindImgMedian("root:Package_SLP:ImgXPS:AutoColorTempImage",1)
	Variable Q75Int=SLP_Util_FindImgMedian("root:Package_SLP:ImgXPS:AutoColorTempImage",2)
	Variable ColorMin=MedianInt-3*(MedianInt-Q25Int)
	Variable ColorMax=MedianInt+3*(Q75Int-MedianInt)
	
	Killwaves AutoColorTempImage
	
	If (Stringmatch(Option,"Min"))
		ColorVal=ColorMin
	ElseIf (Stringmatch(Option,"Max"))
		ColorVal=ColorMax
	ElseIf (StringMatch(Option,"Change"))
		modifyImage /W=$DisplayName $ImageName ctab={ColorMin,ColorMax,,0}
	EndIf
	
	Return ColorVal
End

Function ButtonProc_IXPS_Correction(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	//Used in main ImgXPS panel - to enter the MCorr Panel or change preset/auto preset
	
	switch( ba.eventCode )
		case 2: // mouse up
			NVAR a0=root:Package_SLP:ImgXPS:ManCorr:a0
			NVAR a1=root:Package_SLP:ImgXPS:ManCorr:a1
			NVAR b0=root:Package_SLP:ImgXPS:ManCorr:b0
			NVAR b1=root:Package_SLP:ImgXPS:ManCorr:b1
			NVAR C=root:Package_SLP:ImgXPS:ManCorr:C
			NVAR d0=root:Package_SLP:ImgXPS:ManCorr:d0
			NVAR d1=root:Package_SLP:ImgXPS:ManCorr:d1
			NVAR x_Offset=root:Package_SLP:ImgXPS:ManCorr:x_Offset
			NVAR y_Offset=root:Package_SLP:ImgXPS:ManCorr:y_Offset
			NVAR mag=root:Package_SLP:ImgXPS:ManCorr:mag
			NVAR Rot_Angle=root:Package_SLP:ImgXPS:ManCorr:Rot_Angle
			NVAR PosW_p=root:Package_SLP:ImgXPS:ManCorr:PosW_p
			NVAR PosW_q=root:Package_SLP:ImgXPS:ManCorr:PosW_q
			NVAR PosW_Ref=root:Package_SLP:ImgXPS:ManCorr:PosW_Ref
			SVAR PresetList=root:Package_SLP:ImgXPS:ManCorr:PresetList
			SVAR PresetNote=root:Package_SLP:ImgXPS:ManCorr:PresetNote
			NVAR MCorrMinInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMinInt
			NVAR MCorrMaxInt=root:Package_SLP:ImgXPS:ManCorr:MCorrMaxInt
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			Variable SelRow=V_Value
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
			String UMapW_Name=VolName+"_Umap1"
			String UMapW_FName=ImgVolW_FName+"_Umap1"
			String CorrW_Name=VolName+"_Corr1"
			String CorrW_FName=ImgVolW_FName+"_Corr1"
			String CMapW_Name=VolName+"_CMap1"
			String CMapW_FName=ImgVolW_FName+"_CMap1"
			Wave UMapW=$UMapW_FName
			Wave CorrW=$CorrW_FName
			Wave CMapW=$CMapW_FName

			ControlInfo /W=SLP_ImgXPS_Panel_01 popup_CorrectionPreset
			String Preset_Str=S_Value
			Wave /T ManCorr_Preset=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Wave /T ManCorr_Range=root:Package_SLP:ImgXPS:ManCorr:ManCorr_Range
			FindValue /TEXT=Preset_Str /TXOP=6 root:Package_SLP:ImgXPS:ManCorr:ManCorr_Preset
			Variable PresetRow=V_Value
			
			strswitch(ba.CtrlName)	// string switch
				Case "Button_ManualCorr":
					SLP_IXPS_MCorrCopyUMapColor()
					Panel_IXPS_MapCorr()
					PopupMenu popup_CorrectionPreset2,win=SLP_ImgXPS_MapCorr,popmatch=Preset_Str
					Break
				Case "Button_AutoCorr":
					Make /O/N=7 root:Package_SLP:ImgXPS:ManCorr:AutoFitCoefW /Wave=AutoFitCoefW
					AutoFitCoefW={a0,a1,b0,b1,C,d0,d1}
					FuncFitMD /NTHR=0 SLP_FitFunc_2DPabl2 AutoFitCoefW UMapW  /D=$CorrW_FName
					a0=AutoFitCoefW[0]
					a1=AutoFitCoefW[1]
					b0=AutoFitCoefW[2]
					b1=AutoFitCoefW[3]
					C=AutoFitCoefW[4]
					d0=AutoFitCoefW[5]
					d1=AutoFitCoefW[6]
					
					X_Offset=0
					Y_Offset=0
					Mag=1
					Rot_Angle=0
					
					PopupMenu popup_CorrectionPreset,win=SLP_ImgXPS_Panel_01,popmatch="--"
					SLP_IXPS_MCorr()
					SLP_IXPS_MCorrArbSetting()
					
					
					SLP_IXPS_ScanListW[SelRow][18]=num2str(SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_CORRECTION1","Min"))
					SLP_IXPS_ScanListW[SelRow][19]=num2str(SLP_Util_AutoColor("SLP_ImgXPS_Panel_01#IX_CORRECTION1","Max"))
					SLP_IXPS_DisplaySelectedData(VolName)
							
					Break
				default:							// optional default expression executed
			endswitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_DispChk(VolName) 
	//Alert when user select more than six maps for display or more than one map for correction.
	String VolName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS" 
	
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName 
	
	variable i=0
	variable j=0
	variable k=0
	variable Err_Flg=0
	
	For (i=0;i<dimsize(FitCoefDisplaySelW,0);i+=1)
		If (FitCoefDisplaySelW[i][8]==48)
			j+=1
		EndIf
		If (FitCoefDisplaySelW[i][9]==48)
			k+=1
		EndIf
		If (FitCoefDisplaySelW[i][0]==32&&(FitCoefDisplaySelW[i][8]==48||FitCoefDisplaySelW[i][9]==48))
			DoAlert 0,"Parameter(s) must be selected for extraction in order to be displayed or corrected"
		EndIF
	EndFor

	If (j>6)
		Err_Flg=1
		DoAlert 0,"Maximum of 6 parameters can be displayed"
	Else
		Err_Flg=0
	EndIf
	
	If (k>1)
		Err_Flg=1
		DoAlert 0,"Maximum of 1 parameter can be corrected"
	Else
		Err_Flg=0||Err_Flg //=1 anyway if already select >6 for display
	EndIf
	
	return Err_Flg
End

Function ListBoxProc_IXPS_ScanList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
	
	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			If (row!=-1&&row<dimsize(SLP_IXPS_ScanListW,0))
				String VolName=SLP_IXPS_ScanListW[row][0]
				SLP_IXPS_DisplaySelectedData(VolName)
				
			EndIf
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			//Copy scan notes to the ScanListW
			SLP_IXPS_ScanListW[][46]=SLP_IXPS_ScanListDisplayW[p][2]
		
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function /S SLP_IXPS_GenListFromChk()
	//Return a string that lists the checked items in the ScanList listbox.
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	Wave SLP_IXPS_ScanListDisplaySelW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplaySelW
	
	String Chked_ScanList=""
	variable N_Scans=dimsize(SLP_IXPS_ScanListDisplaySelW,0)
	
	variable i=0
	For (i=0;i<N_Scans;i+=1)
		If (SLP_IXPS_ScanListDisplaySelW[i][0]==48||SLP_IXPS_ScanListDisplaySelW[i][0]==49)
			Chked_ScanList+=SLP_IXPS_ScanListW[i][0]+";"
		EndIf
	EndFor
	
	Return Chked_ScanList
End

Function ButtonProc_IXPS_RestoreRawData(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			DoAlert 1,"The image data will be restored from the recorded location. This may increases the project file size significantly. Continue?"
			If (V_Flag==1)
				Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
				//Make a list of the checked items [CODE:SLP_IXPS_GenListFromChk]
				string Chked_ScanList=SLP_IXPS_GenListFromChk()
				string ScanName=""
				variable DataRow=0
				
				//Toggle the Dispersive Line Creation controls
				ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
				variable SelRow=V_Value
				
				variable i=0
				For (i=0;i<itemsinList(Chked_ScanList,";");i+=1)
					ScanName=stringfromList(i,Chked_ScanList)
					
					SLP_IXPS_RestoreRawData(ScanName)
					
					DataRow=SLP_IXPS_FindDataRow(ScanName) //[CODE:SLP_IXPS_FindDataRow]
					
					//Update the RawDataDel_Flg in the WaveList
					SLP_IXPS_ScanListW[DataRow][45]=""
				
					If (SelRow==DataRow)
						SLP_IXPS_TgglControls("Enable")
						SLP_IXPS_DisplaySelectedData(ScanName)
					EndIf
					
				EndFor
				
				
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_RestoreRawData(ScanName)
	String ScanName
	
	String CurrentFolder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	variable DataRow=SLP_IXPS_FindDataRow(ScanName) //[CODE:SLP_IXPS_FindDataRow]
	
	//string ImgW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
	string RawDataPath=SLP_IXPS_ScanListW[DataRow][2]
	string DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	SetDataFolder $DataFolder_FName
	
	variable zStart=str2num(SLP_IXPS_ScanListW[DataRow][11])
	variable zStep=str2num(SLP_IXPS_ScanListW[DataRow][13])
	
	//Check if the raw data is stil there
	NewPath SLP_DataPathTmp, RawDataPath
	PathInfo SLP_DataPathTmp
	RawDataPath=S_Path
	SLP_IXPS_ScanListW[DataRow][2]=RawDataPath
	KillPath SLP_DataPathTmp
	
	//Load series of images to a 3d volume [CODE:SLP_Util_LoadMultImg2Vol]
	SLP_Util_LoadMultImg2Vol(RawDataPath,ScanName,zStart,zStep)
			
	//Go back 
	SetDataFolder $CurrentFolder
End

Function ButtonProc_IXPS_DelRawData(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			DoAlert 1,"The image volume will be removed from the checked item(s) to reduce this project file size. You can no longer extract to create maps but can still correct the mapping. Continue?"
			If (V_Flag==1)
				//Make a list of the checked items [CODE:SLP_IXPS_GenListFromChk]
				string Chked_ScanList=SLP_IXPS_GenListFromChk()
				variable i=0
				string ScanName=""
				string ImgW_FName=""
				
				//Get the selected row
				ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
				variable SelRow=V_Value
				
				variable DataRow=0
				
				For (i=0;i<itemsinList(Chked_ScanList,";");i+=1)
					ScanName=stringfromList(i,Chked_ScanList)
					DataRow=SLP_IXPS_FindDataRow(ScanName)
					
					//Update the RawDataDel_Flg in the WaveList
					SLP_IXPS_ScanListW[DataRow][45]="y"
					
					If (DataRow==SelRow) //If the current scan is on displayed
						SLP_IXPS_DisplaySelectedData(ScanName) //Update the display
						SLP_IXPS_TgglControls("Disable")
					EndIf
					
					//Delete the raw data
					ImgW_FName=SLP_IXPS_ScanListW[DataRow][1]+SLP_IXPS_ScanListW[DataRow][0]
					If (Exists(ImgW_FName))
						Killwaves $ImgW_FName
					EndIf
					
				EndFor
			Endif
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_TgglControls(Tggl)
	string Tggl //Can be either "Enable" or "Disable"
	
	If (Stringmatch(Tggl,"Enable"))
		SetVariable SetVar_FrameNum,win=SLP_ImgXPS_Panel_01,disable=0
		Slider Slider_ImgVolFrame,win=SLP_ImgXPS_Panel_01,disable=0
		Button Button_ExtMap1,win=SLP_ImgXPS_Panel_01,disable=0,title="Extract..",fColor=(65535,65535,65535)
		PopUpMenu Popup_FitType,disable=0,win=SLP_ImgXPS_Panel_01
	Elseif (StringMatch(Tggl,"Disable"))
		SetVariable SetVar_FrameNum,win=SLP_ImgXPS_Panel_01,disable=2
		Slider Slider_ImgVolFrame,win=SLP_ImgXPS_Panel_01,disable=2
		Button Button_ExtMap1,win=SLP_ImgXPS_Panel_01,disable=2,title="Raw data was removed",fColor=(65535,0,0)
		PopUpMenu Popup_FitType,disable=2,win=SLP_ImgXPS_Panel_01
	EndIf

End


Function SLP_IXPS_SetXYScale(WaveFName,FOV,xMin,xMax,yMin,yMax,Bin)
	string WaveFName
	variable FOV //(microns)
	variable xMin,xMax,yMin,yMax //In pixels before binning. Values gotten from 'find screen position' 
	variable Bin
	
	Wave ImgW=$WaveFName
	
	variable xCenter=(xMin+xMax)/2/Bin
	variable yCenter=(yMin+yMax)/2/Bin
	
	variable pixelSizeX=FOV*Bin/(xMax-xMin)
	variable pixelSizeY=FOV*Bin/(yMax-yMin)
	
	setscale /P x,-1*xCenter*pixelSizeX,pixelSizeX,"Micron",ImgW
	setscale /P y,-1*yCenter*pixelSizeY,pixelSizeY,"Micron",ImgW
End

Function SLP_IXPS_CreateScreenMask(VolName,Threshold,MinSize)
	String VolName
	Variable Threshold
	Variable MinSize
	
	String Current_Folder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ImgVol_IntgW_FName=ImgVolW_FName+"_Intg"
	String ImgVol_ThW_FName=ImgVolW_FName+"_Th"
	String ImgVol_ScrnW_FName=ImgVolW_FName+"_Scrn"
	string W_BoundaryX_FName=SLP_IXPS_ScanListW[DataRow][1]+"W_BoundaryX" //From ImageAnalyzeParticles
	string W_BoundaryY_FName=SLP_IXPS_ScanListW[DataRow][1]+"W_BoundaryY"//From ImageAnalyzeParticles
	string BoundX_W_Name=ImgVolW_FName+"_BX"
	string BoundY_W_Name=ImgVolW_FName+"_BY"
	
	SetDataFolder $DataFolder_FName
	
	Duplicate /O $ImgVol_IntgW_FName,$ImgVol_ThW_FName /WAVE=ImgVol_ThW
	Duplicate /O $ImgVol_IntgW_FName,$ImgVol_ScrnW_FName /WAVE=ImgVol_ScrnW
	ImgVol_ScrnW=1 //By default - if not detecting screen or selecting ROI, the code will try to analyze every pixel.
	
	ImageThreshold/Q/O/I/T=(Threshold) ImgVol_ThW
	
	//ImageAnalyzeParticles /E/W/Q/EBPC/M=3/A=(MinSize)/F stats, ImgVol_ThW
	ImageAnalyzeParticles /E/W/Q/M=3/A=(MinSize)/F stats, ImgVol_ThW 
	//Don't use /EBPC (ignore particle at the edge - problem when the screen touch the edge of the image by cropping)
	
	//Screen position
	Wave W_xmin
	Wave W_xmax
	Wave W_ymin
	Wave W_ymax
	
	If (Dimsize(W_xmin,0)) //If the screen is found
		SLP_IXPS_ScanListW[DataRow][28]=num2str(W_xmin[0])
		SLP_IXPS_ScanListW[DataRow][29]=num2str(W_xmax[0])
		SLP_IXPS_ScanListW[DataRow][30]=num2str(W_ymin[0])
		SLP_IXPS_ScanListW[DataRow][31]=num2str(W_ymax[0])
		
		Wave M_Particle
	
		Duplicate/O M_Particle,$ImgVol_ScrnW_FName /WAVE=ScreenMaskW
		//Change from 64/16 (values used in ImageAnalyzeParticle function of Igor) to 0/1 (0 = outside the screen, 1 = inside the screen)
		ScreenMaskW-=64
		ScreenMaskW/=208
		duplicate /O $W_BoundaryX_FName,$BoundX_W_Name /WAVE=BX_W
		duplicate /O $W_BoundaryY_FName,$BoundY_W_Name /WAVE=BY_W
	Endif
	
	Setdatafolder $Current_folder
End

Function SLP_Util_EqualizeStep(StepSize,OrgW_FName,xW_FName)
	//The result is a new wave with "_xAdj" suffix with Igor's x scaling.
	Variable StepSize
	String OrgW_FName,xW_FName
	
	String ResultW_FName=OrgW_FName+"_xAdj"
	
	Wave OrgW=$OrgW_FName
	Wave xW=$xW_Fname
	
	Variable xStart=xW[0]
	
	Variable xEnd=xW[dimsize(xW,0)-1]
	Variable nStep=Ceil((xEnd-xStart)/StepSize)
	
	Make /O /N=(nStep) $ResultW_FName /Wave=ResultW
	SetScale /P x,xStart,StepSize,ResultW
	
	Interpolate2 /i=3 /Y=ResultW xW,OrgW
	// /i=3 use the x scaling of the ResultW for interpolation. Very convenient.
End

Function SLP_Util_ExtractZProfile(ImgVolW_FName,Vol_x,Vol_y,Bin)
	string ImgVolW_FName
	variable Vol_x,Vol_y
	variable Bin
	
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfWTmp_FName=ImgVolW_FName+"_zProflTmp"
	
	Wave ImgVolW=$ImgVolW_FName
		
	make /O /N=(dimsize(ImgVolW,2)) $ZProfW_FName /Wave=ZProfW
	make /O /N=(dimsize(ImgVolW,2)) $ZProfWTmp_FName /Wave=ZProfW_tmp

	ZProfW=0
	
	variable i
	variable j
	variable k=0
	
	For (i=round(Vol_x-Bin/2);i<round(Vol_x+Bin/2);i+=1)
		For (j=round(Vol_y-Bin/2);j<round(Vol_y+Bin/2);j+=1)
			if (i>=0&&j>=0)
				ZProfW_tmp[]=ImgVolW[i][j][p]
				ZProfW+=ZProfW_tmp
				k+=1
			Endif
		EndFor
	EndFor
	
	KillWaves ZProfW_tmp
	ZProfW/=k //Average the intensity
	
	variable ImgVolW_zStart=dimoffset(ImgVolW,2)
	variable ImgVolW_zStep=dimDelta(ImgVolW,2)
	
	setscale /P x,ImgVolW_zStart,ImgVolW_zStep,ZProfW
End

Function CheckProc_IXPS_zProfile(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW		
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String ImgIntgW_FName=ImgVolW_FName+"_Intg"
			Wave ImgIntgW=$ImgIntgW_FName
			
			If (checked==1)
				If (!Stringmatch("y",SLP_IXPS_ScanListW[SelRow][45])) //If raw data has not been removed
					Variable xPos=pnt2x($ImgVolW_FName,str2num(SLP_IXPS_ScanListW[SelRow][42]))
					Variable yPos=DimOffset($ImgVolW_FName, 1) + str2num(SLP_IXPS_ScanListW[SelRow][43]) *DimDelta($ImgVolW_FName,1)
					Cursor /I/W=SLP_ImgXPS_Panel_01#IX_IMGW/C=(65525,0,0) A $VolName xPos,yPos	
					//setwindow SLP_ImgXPS_Panel_01,hook(zProfileUpdate)=SLP_IXPS_UpdateZProfile//,hookevents=4
					//Ask for binning (need to use local variable - igor limit)
					NVAR zProfBin=root:Package_SLP:ImgXPS:zProfBin
					variable zProfBin_Local=zProfBin
					Prompt zProfBin_Local,"Binning for z-profile plot"
					DoPrompt "Enter parameter",zProfBin_Local
					zProfBin=zProfBin_Local
				EndIf
			Else
				Cursor /K/W=SLP_ImgXPS_Panel_01#IX_IMGW A
				//setwindow SLP_ImgXPS_Panel_01,hook=$""
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_IXPS_CursorHook(s) //HOOK FUNCTION to see spectrum at different (x,y) by moving a cursor

	STRUCT WMWinHookStruct &s

	Variable hookResult = 0

		switch(s.eventCode)
			case 7:				// Activate
				GetWindow SLP_ImgXPS_Panel_01 activeSW
				String activeSubwindow = S_value
				
				//Hook for Z-profile update
				// If the Image Vol display is selected and there is cursor C on it.
				if (CmpStr(activeSubwindow,"SLP_ImgXPS_Panel_01#IX_IMGW") == 0&&!stringmatch("",CsrInfo(A,"SLP_ImgXPS_Panel_01#IX_IMGW")))
					SLP_IXPS_UpdateZProfile()
				Endif
				
				//Hook for Display peak assignment
				if (CmpStr(activeSubwindow,"SLP_ImgXPS_Panel_01#IX_FITTINGWIN") == 0&&!stringmatch("",CsrInfo(A,"SLP_ImgXPS_Panel_01#IX_FITTINGWIN")))
					SLP_IXPS_DispPeakAssign(1) //use '1' for CursorHook
				Endif
				
				//Hook for CMap offset
				if (CmpStr(activeSubwindow,"SLP_ImgXPS_Panel_01#IX_RESULTMAP1") == 0&&!stringmatch("",CsrInfo(A,"SLP_ImgXPS_Panel_01#IX_RESULTMAP1")))
					ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
					variable SelRow=V_Value
					Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW	
					SLP_IXPS_ScanListW[SelRow][57]=num2str(pcsr(A,"SLP_ImgXPS_Panel_01#IX_RESULTMAP1"))
					SLP_IXPS_ScanListW[SelRow][58]=num2str(qcsr(A,"SLP_ImgXPS_Panel_01#IX_RESULTMAP1"))
				Endif
				
				break
		endswitch

	return hookResult		// 0 if nothing done, else 1
End

Function SLP_IXPS_ExtractZProfile(VolName,Vol_x,Vol_y,Bin)
	string VolName
	variable Vol_x,Vol_y
	variable Bin
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	String Current_Folder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfWTmp_FName=ImgVolW_FName+"_zProfl_tmp"
	
	Wave ImgVolW=$ImgVolW_FName
	
	SetDataFolder $DataFolder_FName
	
	make /O /N=(dimsize(ImgVolW,2)) $ZProfW_FName /Wave=ZProfW
	make /O /N=(dimsize(ImgVolW,2)) $ZProfWTmp_FName /Wave=ZProfW_tmp

	ZProfW=0
	
	variable i
	variable j
	variable k=0
	
	For (i=floor(Vol_x-Bin/2);i<floor(Vol_x+Bin/2);i+=1)
		For (j=floor(Vol_y-Bin/2);j<floor(Vol_y+Bin/2);j+=1)
			if (i>=0&&j>=0&&i<dimsize(ImgVolW,0)-1&&j<dimsize(ImgVolW,1)-1)
				ZProfW_tmp[]=ImgVolW[i][j][p]
				ZProfW+=ZProfW_tmp
				k+=1
			Endif
		EndFor
	EndFor
	
	KillWaves ZProfW_tmp
	ZProfW/=k //Average the intensity
	
	variable stv_st=dimoffset(ImgVolW,2)
	variable stv_step=dimDelta(ImgVolW,2)
	
	setscale /P x,stv_st,stv_step,ZProfW
	
	SetDataFolder $Current_Folder
End

Function CheckProc_IXPS_BE(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			SLP_IXPS_ScanListW[SelRow][44]=num2str(checked)
			
			SLP_IXPS_BE_Convert()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ListBoxProc_IXPS_XPSParam(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	wave /T SLP_IXPS_XPSParamW=root:Package_SLP:ImgXPS:SLP_IXPS_XPSParamW
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_IXPS_ScanListW[SelRow][11]=SLP_IXPS_XPSParamW[0][1]
			SLP_IXPS_ScanListW[SelRow][12]=SLP_IXPS_XPSParamW[1][1]
			SLP_IXPS_ScanListW[SelRow][13]=SLP_IXPS_XPSParamW[2][1]
			SLP_IXPS_ScanListW[SelRow][14]=SLP_IXPS_XPSParamW[3][1]
			SLP_IXPS_ScanListW[SelRow][15]=SLP_IXPS_XPSParamW[4][1]
			
			SLP_IXPS_BE_Convert()
			
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function SLP_IXPS_BE_Convert()
		wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
		ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
		variable SelRow=V_Value
		
		variable STV_Start,STV_End
		variable STV_Step
		variable hv
		variable aWF
		
		//Check if the hv and Analyser WF have been entered:
		If (stringmatch(SLP_IXPS_ScanListW[SelRow][14],""))
			hv=0
			Prompt hv,"Photon energy (eV):"
			DoPrompt "Enter missing parameter",hv
			SLP_IXPS_ScanListW[SelRow][14]=num2str(hv)
		Endif
		If (stringmatch(SLP_IXPS_ScanListW[SelRow][15],""))
			aWF=0
			Prompt aWF,"Analyzer workfunction (eV):"
			DoPrompt "Enter missing parameter",aWF
			SLP_IXPS_ScanListW[SelRow][15]=num2str(aWF)
		Endif
		
		String VolName=SLP_IXPS_ScanListW[SelRow][0]
		//SLP_IXPS_DisplaySelectedData(VolName)
		
		String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
		String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
		String ZProfW_FName=ImgVolW_FName+"_zProfl"
		String ZProfMskW_FName=ImgVolW_FName+"_zPMsk" 
		String zProfFitW_FName=SLP_IXPS_ScanListW[SelRow][1]+"Fit_"+SLP_IXPS_ScanListW[SelRow][0]+"_zProfl"
		
		String ZProfBEW_FName=ImgVolW_FName+"_zProflBE"
		String ZProfMskBEW_FName=ImgVolW_FName+"_zPMskBE" 
		String zProfFitBEW_FName=zProfFitW_FName+"BE"
		
		Wave ZProfW=$ZProfW_FName
		Wave ZProfMskW=$ZProfMskW_FName
		Wave zProfFitW=$zProfFitW_FName
		
		Duplicate /O $ZProfW_FName,$ZProfBEW_FName /Wave=ZProfBEW
		Duplicate /O $ZProfMskW_FName,$ZProfMskBEW_FName /Wave=ZProfMskBEW
		Duplicate /O $zProfFitW_FName,$zProfFitBEW_FName /Wave=ZProfFitBEW
		
		//Use wave **dependencies** (:= doesn' work! - use 'SetFormula' instead)
		//SetFormula ZProfBEW, "ZProfW" <- doesn't work (no update) need FName
		//ZProfBEW:=ZProfW <- doesn't compile
		//NOT ELEGANT
		//string DependencyCmd
		//DependencyCmd="SetFormula "+ZProfBEW_FName+", \"" +ZProfW_FName+"\""
		
		//*The second term (original wave) has to be a STRING (not wave)*
		SetFormula ZProfBEW,ZProfW_FName
		SetFormula ZProfMskBEW,ZProfMskW_FName
		SetFormula ZProfFitBEW,zProfFitW_FName
		
		STV_Start=str2num(SLP_IXPS_ScanListW[SelRow][11])
		STV_End=str2num(SLP_IXPS_ScanListW[SelRow][12])
		STV_Step=str2num(SLP_IXPS_ScanListW[SelRow][13])
		hv=str2num(SLP_IXPS_ScanListW[SelRow][14])
		aWF=str2num(SLP_IXPS_ScanListW[SelRow][15])
		
		NVAR LLim=root:Package_SLP:ImgXPS:LLim
		NVAR ULim=root:Package_SLP:ImgXPS:ULim
		
		Setscale /P x,hv-STV_Start-aWF,-1*STV_Step,ZProfBEW
		Setscale /P x,hv-STV_Start-aWF,-1*STV_Step,ZProfMskBEW
		Setscale /I x,hv-LLim-aWF,hv-ULim-aWF,ZProfFitBEW  //[BUG] Fix here!
		//[Note] Fit wave doesn't have the same number of point && doesn't start and end at the same x (it has the same size as fit mask)
		
		SLP_IXPS_DisplaySelectedData(VolName)
End

Function SLP_ERF(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = A* erfc((x-x0)/Width)+C
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 4
	//CurveFitDialog/ w[0] = A
	//CurveFitDialog/ w[1] = C
	//CurveFitDialog/ w[2] = x0
	//CurveFitDialog/ w[3] = Width

	return w[0]* erf((x-w[2])/w[3])+w[1]
End

Function SLP_IXPS_Extract1GLA(VolName,LLim,ULim)
	string VolName
	variable LLim,ULim
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Make /O/D/N=2 BG_Coef
	Make /O/D/N=5 GLA1_coef
	String HoldStr_BG=""
	String HoldStr_GLA1=""
	
	BG_Coef[0] = str2num(FitCoefDisplayW[0][4]);HoldStr_BG[0]=num2str((FitCoefDisplaySelW[0][5]-32)/16)
	BG_Coef[1] = str2num(FitCoefDisplayW[1][4]);HoldStr_BG[1]=num2str((FitCoefDisplaySelW[1][5]-32)/16)
	GLA1_coef[0] = str2num(FitCoefDisplayW[2][4]);HoldStr_GLA1[0]=num2str((FitCoefDisplaySelW[2][5]-32)/16)
	GLA1_coef[1] = str2num(FitCoefDisplayW[3][4]);HoldStr_GLA1[1]=num2str((FitCoefDisplaySelW[3][5]-32)/16)
	GLA1_coef[2] = str2num(FitCoefDisplayW[4][4]);HoldStr_GLA1[2]=num2str((FitCoefDisplaySelW[4][5]-32)/16)
	GLA1_coef[3] = str2num(FitCoefDisplayW[5][4]);HoldStr_GLA1[3]=num2str((FitCoefDisplaySelW[5][5]-32)/16)
	GLA1_coef[4] = str2num(FitCoefDisplayW[6][4]);HoldStr_GLA1[4]=num2str((FitCoefDisplaySelW[6][5]-32)/16)
	
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,LLim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	If (V_Value==0)
		FuncFit /Q/W=2/NTHR=0/TBOX=768  {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName 
	Elseif (V_Value==1) //Fast mode
		FuncFit /N=1/Q/W=2/NTHR=0/TBOX=768  {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
		// /N=1 = fast mode (no display for fit steps)
		DoUpdate
	Endif
	
	FitCoefDisplayW[0][3]=num2str(BG_Coef[0])
	FitCoefDisplayW[1][3]=num2str(BG_Coef[1])
	FitCoefDisplayW[2][3]=num2str(GLA1_coef[0])
	FitCoefDisplayW[3][3]=num2str(GLA1_coef[1])
	FitCoefDisplayW[4][3]=num2str(GLA1_coef[2])
	FitCoefDisplayW[5][3]=num2str(GLA1_coef[3])
	FitCoefDisplayW[6][3]=num2str(GLA1_coef[4])
	
	//Return GLA1_coef[1] 		
	
End

Function SLP_IXPS_Extract2GLAs(VolName,LLim,ULim)
	string VolName
	variable LLim,ULim
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]	
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	Wave FitZProfW=$FitZProfW_FName
	FitZProfW=NaN
	
	Make /O/D/N=2 BG_Coef
	Make /O/D/N=5 GLA1_coef
	Make /O/D/N=5 GLA2_coef
	
	String HoldStr_BG=""
	String HoldStr_GLA1=""
	String HoldStr_GLA2=""
	
	BG_Coef[0] = str2num(FitCoefDisplayW[0][4]);HoldStr_BG[0]=num2str((FitCoefDisplaySelW[0][5]-32)/16)
	BG_Coef[1] = str2num(FitCoefDisplayW[1][4]);HoldStr_BG[1]=num2str((FitCoefDisplaySelW[1][5]-32)/16)
	GLA1_coef[0] = str2num(FitCoefDisplayW[2][4]);HoldStr_GLA1[0]=num2str((FitCoefDisplaySelW[2][5]-32)/16)
	GLA1_coef[1] = str2num(FitCoefDisplayW[3][4]);HoldStr_GLA1[1]=num2str((FitCoefDisplaySelW[3][5]-32)/16)
	GLA1_coef[2] = str2num(FitCoefDisplayW[4][4]);HoldStr_GLA1[2]=num2str((FitCoefDisplaySelW[4][5]-32)/16)
	GLA1_coef[3] = str2num(FitCoefDisplayW[5][4]);HoldStr_GLA1[3]=num2str((FitCoefDisplaySelW[5][5]-32)/16)
	GLA1_coef[4] = str2num(FitCoefDisplayW[6][4]);HoldStr_GLA1[4]=num2str((FitCoefDisplaySelW[6][5]-32)/16)
	GLA2_coef[0] = str2num(FitCoefDisplayW[7][4]);HoldStr_GLA2[0]=num2str((FitCoefDisplaySelW[7][5]-32)/16)
	GLA2_coef[1] = str2num(FitCoefDisplayW[8][4]);HoldStr_GLA2[1]=num2str((FitCoefDisplaySelW[8][5]-32)/16)
	GLA2_coef[2] = str2num(FitCoefDisplayW[9][4]);HoldStr_GLA2[2]=num2str((FitCoefDisplaySelW[9][5]-32)/16)
	GLA2_coef[3] = str2num(FitCoefDisplayW[10][4]);HoldStr_GLA2[3]=num2str((FitCoefDisplaySelW[10][5]-32)/16)
	GLA2_coef[4] = str2num(FitCoefDisplayW[11][4]);HoldStr_GLA2[4]=num2str((FitCoefDisplaySelW[11][5]-32)/16)
	
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,LLim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	If (V_Value==0)
		FuncFit /X/Q/W=2/NTHR=0/TBOX=768 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
	Elseif (V_Value==1) //Fast mode
		FuncFit /N=1/X/Q/W=2/NTHR=0 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
		// /N=1 = fast mode (no display for fit steps)
		DoUpdate
	Endif
	
	FitCoefDisplayW[0][3]=num2str(BG_Coef[0])
	FitCoefDisplayW[1][3]=num2str(BG_Coef[1])
	FitCoefDisplayW[2][3]=num2str(GLA1_coef[0])
	FitCoefDisplayW[3][3]=num2str(GLA1_coef[1])
	FitCoefDisplayW[4][3]=num2str(GLA1_coef[2])
	FitCoefDisplayW[5][3]=num2str(GLA1_coef[3])
	FitCoefDisplayW[6][3]=num2str(GLA1_coef[4])
	FitCoefDisplayW[7][3]=num2str(GLA2_coef[0])
	FitCoefDisplayW[8][3]=num2str(GLA2_coef[1])
	FitCoefDisplayW[9][3]=num2str(GLA2_coef[2])
	FitCoefDisplayW[10][3]=num2str(GLA2_coef[3])
	FitCoefDisplayW[11][3]=num2str(GLA2_coef[4])
	
	//Return GLA1_coef[1] 		
	
End

Function SLP_IXPS_Extract3GLAs(VolName,LLim,ULim)
	string VolName
	variable LLim,ULim
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Make /O/D/N=2 BG_Coef
	Make /O/D/N=5 GLA1_coef
	Make /O/D/N=5 GLA2_coef
	Make /O/D/N=5 GLA3_coef
	
	String HoldStr_BG=""
	String HoldStr_GLA1=""
	String HoldStr_GLA2=""
	String HoldStr_GLA3=""
	
	BG_Coef[0] = str2num(FitCoefDisplayW[0][4]);HoldStr_BG[0]=num2str((FitCoefDisplaySelW[0][5]-32)/16)
	BG_Coef[1] = str2num(FitCoefDisplayW[1][4]);HoldStr_BG[1]=num2str((FitCoefDisplaySelW[1][5]-32)/16)
	GLA1_coef[0] = str2num(FitCoefDisplayW[2][4]);HoldStr_GLA1[0]=num2str((FitCoefDisplaySelW[2][5]-32)/16)
	GLA1_coef[1] = str2num(FitCoefDisplayW[3][4]);HoldStr_GLA1[1]=num2str((FitCoefDisplaySelW[3][5]-32)/16)
	GLA1_coef[2] = str2num(FitCoefDisplayW[4][4]);HoldStr_GLA1[2]=num2str((FitCoefDisplaySelW[4][5]-32)/16)
	GLA1_coef[3] = str2num(FitCoefDisplayW[5][4]);HoldStr_GLA1[3]=num2str((FitCoefDisplaySelW[5][5]-32)/16)
	GLA1_coef[4] = str2num(FitCoefDisplayW[6][4]);HoldStr_GLA1[4]=num2str((FitCoefDisplaySelW[6][5]-32)/16)
	GLA2_coef[0] = str2num(FitCoefDisplayW[7][4]);HoldStr_GLA2[0]=num2str((FitCoefDisplaySelW[7][5]-32)/16)
	GLA2_coef[1] = str2num(FitCoefDisplayW[8][4]);HoldStr_GLA2[1]=num2str((FitCoefDisplaySelW[8][5]-32)/16)
	GLA2_coef[2] = str2num(FitCoefDisplayW[9][4]);HoldStr_GLA2[2]=num2str((FitCoefDisplaySelW[9][5]-32)/16)
	GLA2_coef[3] = str2num(FitCoefDisplayW[10][4]);HoldStr_GLA2[3]=num2str((FitCoefDisplaySelW[10][5]-32)/16)
	GLA2_coef[4] = str2num(FitCoefDisplayW[11][4]);HoldStr_GLA2[4]=num2str((FitCoefDisplaySelW[11][5]-32)/16)
	GLA3_coef[0] = str2num(FitCoefDisplayW[12][4]);HoldStr_GLA3[0]=num2str((FitCoefDisplaySelW[12][5]-32)/16)
	GLA3_coef[1] = str2num(FitCoefDisplayW[13][4]);HoldStr_GLA3[1]=num2str((FitCoefDisplaySelW[13][5]-32)/16)
	GLA3_coef[2] = str2num(FitCoefDisplayW[14][4]);HoldStr_GLA3[2]=num2str((FitCoefDisplaySelW[14][5]-32)/16)
	GLA3_coef[3] = str2num(FitCoefDisplayW[15][4]);HoldStr_GLA3[3]=num2str((FitCoefDisplaySelW[15][5]-32)/16)
	GLA3_coef[4] = str2num(FitCoefDisplayW[16][4]);HoldStr_GLA3[4]=num2str((FitCoefDisplaySelW[16][5]-32)/16)
	
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,LLim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	If (V_Value==0)
		FuncFit /Q/W=2/NTHR=0/TBOX=768 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2},{SLP_FitFunc_InvGLA,GLA3_coef,HOLD=HoldStr_GLA3}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
	Elseif (V_Value==1) //Fast mode
		FuncFit /N=1/Q/W=2/NTHR=0/TBOX=768 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2},{SLP_FitFunc_InvGLA,GLA3_coef,HOLD=HoldStr_GLA3}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
		// /N=1 = fast mode (no display for fit steps)
		DoUpdate
	Endif
	
	FitCoefDisplayW[0][3]=num2str(BG_Coef[0])
	FitCoefDisplayW[1][3]=num2str(BG_Coef[1])
	FitCoefDisplayW[2][3]=num2str(GLA1_coef[0])
	FitCoefDisplayW[3][3]=num2str(GLA1_coef[1])
	FitCoefDisplayW[4][3]=num2str(GLA1_coef[2])
	FitCoefDisplayW[5][3]=num2str(GLA1_coef[3])
	FitCoefDisplayW[6][3]=num2str(GLA1_coef[4])
	FitCoefDisplayW[7][3]=num2str(GLA2_coef[0])
	FitCoefDisplayW[8][3]=num2str(GLA2_coef[1])
	FitCoefDisplayW[9][3]=num2str(GLA2_coef[2])
	FitCoefDisplayW[10][3]=num2str(GLA2_coef[3])
	FitCoefDisplayW[11][3]=num2str(GLA2_coef[4])
	FitCoefDisplayW[12][3]=num2str(GLA3_coef[0])
	FitCoefDisplayW[13][3]=num2str(GLA3_coef[1])
	FitCoefDisplayW[14][3]=num2str(GLA3_coef[2])
	FitCoefDisplayW[15][3]=num2str(GLA3_coef[3])
	FitCoefDisplayW[16][3]=num2str(GLA3_coef[4])
	
	//Return GLA1_coef[1] 		
	
End

Function SLP_IXPS_Extract4GLAs(VolName,LLim,ULim)
	string VolName
	variable LLim,ULim
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Make /O/D/N=2 BG_Coef
	Make /O/D/N=5 GLA1_coef
	Make /O/D/N=5 GLA2_coef
	Make /O/D/N=5 GLA3_coef
	Make /O/D/N=5 GLA4_coef
	
	String HoldStr_BG=""
	String HoldStr_GLA1=""
	String HoldStr_GLA2=""
	String HoldStr_GLA3=""
	String HoldStr_GLA4=""
	
	BG_Coef[0] = str2num(FitCoefDisplayW[0][4]);HoldStr_BG[0]=num2str((FitCoefDisplaySelW[0][5]-32)/16)
	BG_Coef[1] = str2num(FitCoefDisplayW[1][4]);HoldStr_BG[1]=num2str((FitCoefDisplaySelW[1][5]-32)/16)
	GLA1_coef[0] = str2num(FitCoefDisplayW[2][4]);HoldStr_GLA1[0]=num2str((FitCoefDisplaySelW[2][5]-32)/16)
	GLA1_coef[1] = str2num(FitCoefDisplayW[3][4]);HoldStr_GLA1[1]=num2str((FitCoefDisplaySelW[3][5]-32)/16)
	GLA1_coef[2] = str2num(FitCoefDisplayW[4][4]);HoldStr_GLA1[2]=num2str((FitCoefDisplaySelW[4][5]-32)/16)
	GLA1_coef[3] = str2num(FitCoefDisplayW[5][4]);HoldStr_GLA1[3]=num2str((FitCoefDisplaySelW[5][5]-32)/16)
	GLA1_coef[4] = str2num(FitCoefDisplayW[6][4]);HoldStr_GLA1[4]=num2str((FitCoefDisplaySelW[6][5]-32)/16)
	GLA2_coef[0] = str2num(FitCoefDisplayW[7][4]);HoldStr_GLA2[0]=num2str((FitCoefDisplaySelW[7][5]-32)/16)
	GLA2_coef[1] = str2num(FitCoefDisplayW[8][4]);HoldStr_GLA2[1]=num2str((FitCoefDisplaySelW[8][5]-32)/16)
	GLA2_coef[2] = str2num(FitCoefDisplayW[9][4]);HoldStr_GLA2[2]=num2str((FitCoefDisplaySelW[9][5]-32)/16)
	GLA2_coef[3] = str2num(FitCoefDisplayW[10][4]);HoldStr_GLA2[3]=num2str((FitCoefDisplaySelW[10][5]-32)/16)
	GLA2_coef[4] = str2num(FitCoefDisplayW[11][4]);HoldStr_GLA2[4]=num2str((FitCoefDisplaySelW[11][5]-32)/16)
	GLA3_coef[0] = str2num(FitCoefDisplayW[12][4]);HoldStr_GLA3[0]=num2str((FitCoefDisplaySelW[12][5]-32)/16)
	GLA3_coef[1] = str2num(FitCoefDisplayW[13][4]);HoldStr_GLA3[1]=num2str((FitCoefDisplaySelW[13][5]-32)/16)
	GLA3_coef[2] = str2num(FitCoefDisplayW[14][4]);HoldStr_GLA3[2]=num2str((FitCoefDisplaySelW[14][5]-32)/16)
	GLA3_coef[3] = str2num(FitCoefDisplayW[15][4]);HoldStr_GLA3[3]=num2str((FitCoefDisplaySelW[15][5]-32)/16)
	GLA3_coef[4] = str2num(FitCoefDisplayW[16][4]);HoldStr_GLA3[4]=num2str((FitCoefDisplaySelW[16][5]-32)/16)
	GLA4_coef[0] = str2num(FitCoefDisplayW[17][4]);HoldStr_GLA3[0]=num2str((FitCoefDisplaySelW[17][5]-32)/16)
	GLA4_coef[1] = str2num(FitCoefDisplayW[18][4]);HoldStr_GLA3[1]=num2str((FitCoefDisplaySelW[18][5]-32)/16)
	GLA4_coef[2] = str2num(FitCoefDisplayW[19][4]);HoldStr_GLA3[2]=num2str((FitCoefDisplaySelW[19][5]-32)/16)
	GLA4_coef[3] = str2num(FitCoefDisplayW[20][4]);HoldStr_GLA3[3]=num2str((FitCoefDisplaySelW[20][5]-32)/16)
	GLA4_coef[4] = str2num(FitCoefDisplayW[21][4]);HoldStr_GLA3[4]=num2str((FitCoefDisplaySelW[21][5]-32)/16)
	
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,LLim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	If (V_Value==0)
		FuncFit /Q/W=2/NTHR=0/TBOX=768 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2},{SLP_FitFunc_InvGLA,GLA3_coef,HOLD=HoldStr_GLA3},{SLP_FitFunc_InvGLA,GLA4_coef,HOLD=HoldStr_GLA4}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
	Elseif (V_Value==1) //Fast mode
		FuncFit /N=1/Q/W=2/NTHR=0/TBOX=768 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2},{SLP_FitFunc_InvGLA,GLA3_coef,HOLD=HoldStr_GLA3},{SLP_FitFunc_InvGLA,GLA4_coef,HOLD=HoldStr_GLA4}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
		// /N=1 = fast mode (no display for fit steps)
		DoUpdate
	Endif
	
	FitCoefDisplayW[0][3]=num2str(BG_Coef[0])
	FitCoefDisplayW[1][3]=num2str(BG_Coef[1])
	FitCoefDisplayW[2][3]=num2str(GLA1_coef[0])
	FitCoefDisplayW[3][3]=num2str(GLA1_coef[1])
	FitCoefDisplayW[4][3]=num2str(GLA1_coef[2])
	FitCoefDisplayW[5][3]=num2str(GLA1_coef[3])
	FitCoefDisplayW[6][3]=num2str(GLA1_coef[4])
	FitCoefDisplayW[7][3]=num2str(GLA2_coef[0])
	FitCoefDisplayW[8][3]=num2str(GLA2_coef[1])
	FitCoefDisplayW[9][3]=num2str(GLA2_coef[2])
	FitCoefDisplayW[10][3]=num2str(GLA2_coef[3])
	FitCoefDisplayW[11][3]=num2str(GLA2_coef[4])
	FitCoefDisplayW[12][3]=num2str(GLA3_coef[0])
	FitCoefDisplayW[13][3]=num2str(GLA3_coef[1])
	FitCoefDisplayW[14][3]=num2str(GLA3_coef[2])
	FitCoefDisplayW[15][3]=num2str(GLA3_coef[3])
	FitCoefDisplayW[16][3]=num2str(GLA3_coef[4])
	FitCoefDisplayW[17][3]=num2str(GLA4_coef[0])
	FitCoefDisplayW[18][3]=num2str(GLA4_coef[1])
	FitCoefDisplayW[19][3]=num2str(GLA4_coef[2])
	FitCoefDisplayW[20][3]=num2str(GLA4_coef[3])
	FitCoefDisplayW[21][3]=num2str(GLA4_coef[4])
	
	//Return GLA1_coef[1] 		
	
End

Function SLP_IXPS_ExtractPeakPos(VolName,LLim,ULim)
	string VolName
	variable LLim,ULim
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	
	//Create Coef. wave
	//Make /O/D/N=10 $FitCoefW_FName /WAVE=FitCoefW
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	
	Make /O/D/N=2 BG_Coef
	Make /O/D/N=5 GLA1_coef
	Make /O/D/N=5 GLA2_coef
	BG_Coef[0] = str2num(FitCoefDisplayW[0][4])
	BG_Coef[1] = str2num(FitCoefDisplayW[1][4])
	GLA1_coef[0] = str2num(FitCoefDisplayW[2][4])
	GLA1_coef[1] = str2num(FitCoefDisplayW[3][4])
	GLA1_coef[2] = str2num(FitCoefDisplayW[4][4])
	GLA1_coef[3] = str2num(FitCoefDisplayW[5][4])
	GLA1_coef[4] = str2num(FitCoefDisplayW[6][4])
	GLA2_coef[0] = str2num(FitCoefDisplayW[7][4])
	GLA2_coef[1] = str2num(FitCoefDisplayW[8][4])
	GLA2_coef[2] = str2num(FitCoefDisplayW[9][4])
	GLA2_coef[3] = str2num(FitCoefDisplayW[10][4])
	GLA2_coef[4] = str2num(FitCoefDisplayW[11][4])
	
	Wave ZProfMskW=$ZProfMskW_FName
	ZProfMskW=0
	ZProfMskW[round(x2pnt(ZProfMskW,Llim)),round(x2pnt(ZProfMskW,ULim))]=1
	
	FuncFit /Q/NTHR=0/TBOX=768 {{line,BG_Coef},{SLP_FitFunc_GLA,GLA1_coef},{SLP_FitFunc_GLA,GLA2_coef}}  ZProfW  /D /M=ZProfMskW //C=Constraint_W
	
	FitCoefDisplayW[0][3]=num2str(BG_Coef[0])
	FitCoefDisplayW[1][3]=num2str(BG_Coef[1])
	FitCoefDisplayW[2][3]=num2str(GLA1_coef[0])
	FitCoefDisplayW[3][3]=num2str(GLA1_coef[1])
	FitCoefDisplayW[4][3]=num2str(GLA1_coef[2])
	FitCoefDisplayW[5][3]=num2str(GLA1_coef[3])
	FitCoefDisplayW[6][3]=num2str(GLA1_coef[4])
	FitCoefDisplayW[7][3]=num2str(GLA2_coef[0])
	FitCoefDisplayW[8][3]=num2str(GLA2_coef[1])
	FitCoefDisplayW[9][3]=num2str(GLA2_coef[2])
	FitCoefDisplayW[10][3]=num2str(GLA2_coef[3])
	FitCoefDisplayW[11][3]=num2str(GLA2_coef[4])
	
	
	Return GLA1_coef[1] 		
	
End



Function SLP_IXPS_FitConstraints(VolName)
	String VolName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	
	variable i=0
	String Constraint_txt=""
	Make /O/T/N=0 $FitCoefConstraintsW_FName /WAVE=FitCoefConstraintsW
	
	For (i=0;i<dimsize(FitCoefDisplayW,0);i+=1)
		If (!StringMatch(FitCoefDisplayW[i][6],""))
			Constraint_txt="K"+num2str(i)+">"+FitCoefDisplayW[i][6]
			redimension /N=(dimsize(FitCoefConstraintsW,0)+1) FitCoefConstraintsW
			FitCoefConstraintsW[dimsize(FitCoefConstraintsW,0)-1]=Constraint_txt
		EndIf
		
		If (!StringMatch(FitCoefDisplayW[i][7],""))
			Constraint_txt="K"+num2str(i)+"<"+FitCoefDisplayW[i][7]
			redimension /N=(dimsize(FitCoefConstraintsW,0)+1) FitCoefConstraintsW
			FitCoefConstraintsW[dimsize(FitCoefConstraintsW,0)-1]=Constraint_txt
		EndIf
	EndFor

End

Function SLP_IXPS_FitInit(VolName,FitName)
	String VolName
	String FitName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"
	
	//Create Fit wave
	
	Make /T/O/N=(256,16) $FitCoefDisplayW_FName /WAVE=FitCoefDisplayW
	Make /O/N=(256,16) $FitCoefDisplaySelW_FName /WAVE=FitCoefDisplaySelW
	duplicate  /O $ZProfW_FName,$FitZProfW_FName /Wave=FitZProfW
	FitZProfW=0
	//Size is 256 rows x 16 columns for any kinds of fit
	//Reset the param waves
	FitCoefDisplayW=""
	FitCoefDisplaySelW=0
	
	SetDimLabel 1,0,Ex,FitCoefDisplayW
	SetDimLabel 1,1,K,FitCoefDisplayW
	SetDimLabel 1,2,Param,FitCoefDisplayW
	SetDimLabel 1,3,Value,FitCoefDisplayW
	SetDimLabel 1,4,Guess,FitCoefDisplayW
	SetDimLabel 1,5,Hold,FitCoefDisplayW
	SetDimLabel 1,6,LLim,FitCoefDisplayW
	SetDimLabel 1,7,ULim,FitCoefDisplayW
	SetDimLabel 1,8,Disp,FitCoefDisplayW
	SetDimLabel 1,9,Corr,FitCoefDisplayW
	SetDimLabel 1,10,DLLim,FitCoefDisplayW
	SetDimLabel 1,11,DULim,FitCoefDisplayW
	
	FitCoefDisplaySelW[][0]=48 //Items to be saved (Default = check all)
	FitCoefDisplaySelW[][2]=0 //Param (K0,K1,K2,...)
	FitCoefDisplaySelW[][3]=0 //Value
	FitCoefDisplaySelW[][4]=2 //Guess
	FitCoefDisplaySelW[][5]=32 //ChkBox3 for 'Hold'
	FitCoefDisplaySelW[][6]=2 //LLim
	FitCoefDisplaySelW[][7]=2 //ULim
	FitCoefDisplaySelW[][8]=32 //ChkBox for Display (limit to 6, only if the first Chkbox is checked)
	FitCoefDisplaySelW[][9]=32 //ChkBox for Correction (limit to 1, only if the first Chkbox is checked)
	FitCoefDisplaySelW[][10]=2 //DLLim (Intensity lower limit for image)
	FitCoefDisplaySelW[][11]=2 //DULim (Intensity upper limit for image)
	
	strswitch(FitName)	// string switch
		Case "Secondary yield cut-off":		// execute if case matches expression
			FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Height";FitCoefDisplaySelW[0][4,7]=0;FitCoefDisplayW[0][6]="0";FitCoefDisplayW[0][7]="5000"
			FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Offset";FitCoefDisplaySelW[1][4,7]=0;FitCoefDisplayW[1][6]="0";FitCoefDisplayW[1][7]="5000"
			FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="Cutoff";FitCoefDisplaySelW[2][4,7]=0//Use algorithm instead
			FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="Width";FitCoefDisplayW[3][4]="0.5";FitCoefDisplayW[3][6]="0.05";FitCoefDisplayW[3][7]="5"
			FitCoefDisplaySelW[4,255][0,15]=0//Clear all unused cells
			FitCoefDisplaySelW[2][0]=48 //Select Cutoff (most used one)
			Break
		Case "LEEM cut-off":		// execute if case matches expression
			FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="RawMin";FitCoefDisplaySelW[0][4,7]=0
			FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="FirstDiffMin";FitCoefDisplaySelW[1][4,7]=0
			FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="SecondDiffMin";FitCoefDisplaySelW[2][4,7]=0
			FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="SecondDiffMax";FitCoefDisplaySelW[3][4,7]=0
			FitCoefDisplaySelW[4,255][0,15]=0//Clear all unused cells
			FitCoefDisplaySelW[2][0]=48 //Select Cutoff (most used one)
			Break
		Case "1GLA":			
			//Linear BG
			FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Line offset";FitCoefDisplayW[0][4]="0"
			FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Line slope";FitCoefDisplayW[1][4]="0"
			//Peak1
			FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="p1_int";FitCoefDisplayW[2][4]="0";FitCoefDisplayW[2][6]="0"
			FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="p1_pos";FitCoefDisplayW[3][4]="0";
			FitCoefDisplayW[4][1]="K4";FitCoefDisplayW[4][2]="p1_fwhm";FitCoefDisplayW[4][4]="1";FitCoefDisplayW[4][6]="0.1";FitCoefDisplayW[4][7]="3"
			FitCoefDisplayW[5][1]="K5";FitCoefDisplayW[5][2]="p1_mix";FitCoefDisplayW[5][4]="0.5";FitCoefDisplayW[5][6]="0.001";FitCoefDisplayW[5][7]="0.999"
			FitCoefDisplayW[6][1]="K6";FitCoefDisplayW[6][2]="p1_as";FitCoefDisplayW[6][4]="0.5";FitCoefDisplayW[6][6]="0.001";FitCoefDisplayW[6][7]="0.999"
			//The rest are calculated from fit params and can be used for mapping (cannot do guess or set constraints)
			FitCoefDisplayW[7][2]="p1_area";FitCoefDisplaySelW[7][4,7]=0
			FitCoefDisplayW[8][2]="custom1";FitCoefDisplayW[8][4]="<Formula>";FitCoefDisplaySelW[8][4]=2;FitCoefDisplaySelW[8][5,7]=0
			FitCoefDisplayW[9][2]="custom2";FitCoefDisplayW[9][4]="<Formula>";FitCoefDisplaySelW[9][4]=2;FitCoefDisplaySelW[9][5,7]=0
			FitCoefDisplaySelW[10,255][0,15]=0//Clear all unused cells
			FitCoefDisplaySelW[3][0]=48 //Select p1_pos (most used one)
			Break
		Case "2GLAs":			
			//Linear BG
			FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Line offset";FitCoefDisplayW[0][4]="0"
			FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Line slope";FitCoefDisplayW[1][4]="0"
			//Peak1
			FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="p1_int";FitCoefDisplayW[2][4]="0";FitCoefDisplayW[2][6]="0"
			FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="p1_pos";FitCoefDisplayW[3][4]="0";
			FitCoefDisplayW[4][1]="K4";FitCoefDisplayW[4][2]="p1_fwhm";FitCoefDisplayW[4][4]="1";FitCoefDisplayW[4][6]="0.1";FitCoefDisplayW[4][7]="3"
			FitCoefDisplayW[5][1]="K5";FitCoefDisplayW[5][2]="p1_mix";FitCoefDisplayW[5][4]="0.5";FitCoefDisplayW[5][6]="0.001";FitCoefDisplayW[5][7]="0.999"
			FitCoefDisplayW[6][1]="K6";FitCoefDisplayW[6][2]="p1_as";FitCoefDisplayW[6][4]="0.5";FitCoefDisplayW[6][6]="0.001";FitCoefDisplayW[6][7]="0.999"
			//Peak2
			FitCoefDisplayW[7][1]="K7";FitCoefDisplayW[7][2]="p2_int";FitCoefDisplayW[7][4]="0";FitCoefDisplayW[7][6]="0"
			FitCoefDisplayW[8][1]="K8";FitCoefDisplayW[8][2]="p2_pos";FitCoefDisplayW[8][4]="0"
			FitCoefDisplayW[9][1]="K9";FitCoefDisplayW[9][2]="p2_fwhm";FitCoefDisplayW[9][4]="1";FitCoefDisplayW[9][6]="0.1";FitCoefDisplayW[9][7]="3"
			FitCoefDisplayW[10][1]="K10";FitCoefDisplayW[10][2]="p2_mix";FitCoefDisplayW[10][4]="0.5";FitCoefDisplayW[10][6]="0.001";FitCoefDisplayW[10][7]="0.999"
			FitCoefDisplayW[11][1]="K11";FitCoefDisplayW[11][2]="p2_as";FitCoefDisplayW[11][4]="0.5";FitCoefDisplayW[11][6]="0.001";FitCoefDisplayW[11][7]="0.999"
			//The rest are calculated from fit params and can be used for mapping (cannot do guess or set constraints)
			FitCoefDisplayW[12][2]="p1_area";FitCoefDisplaySelW[12][4,7]=0
			FitCoefDisplayW[13][2]="p2_area";FitCoefDisplaySelW[13][4,7]=0
			FitCoefDisplayW[14][2]="custom1";FitCoefDisplayW[14][4]="<Formula>";FitCoefDisplaySelW[14][4]=2;FitCoefDisplaySelW[14][5,7]=0
			FitCoefDisplayW[15][2]="custom2";FitCoefDisplayW[15][4]="<Formula>";FitCoefDisplaySelW[15][4]=2;FitCoefDisplaySelW[15][5,7]=0
			FitCoefDisplaySelW[16,255][0,15]=0//Clear all unused cells
			FitCoefDisplaySelW[3][0]=48 //Select p1_pos (most used one)
			Break
		Case "3GLAs":			
			//Linear BG
			FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Line offset";FitCoefDisplayW[0][4]="0"
			FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Line slope";FitCoefDisplayW[1][4]="0"
			//Peak1
			FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="p1_int";FitCoefDisplayW[2][4]="0";FitCoefDisplayW[2][6]="0"
			FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="p1_pos";FitCoefDisplayW[3][4]="0";
			FitCoefDisplayW[4][1]="K4";FitCoefDisplayW[4][2]="p1_fwhm";FitCoefDisplayW[4][4]="1";FitCoefDisplayW[4][6]="0.1";FitCoefDisplayW[4][7]="3"
			FitCoefDisplayW[5][1]="K5";FitCoefDisplayW[5][2]="p1_mix";FitCoefDisplayW[5][4]="0.5";FitCoefDisplayW[5][6]="0.001";FitCoefDisplayW[5][7]="0.999"
			FitCoefDisplayW[6][1]="K6";FitCoefDisplayW[6][2]="p1_as";FitCoefDisplayW[6][4]="0.5";FitCoefDisplayW[6][6]="0.001";FitCoefDisplayW[6][7]="0.999"
			//Peak2
			FitCoefDisplayW[7][1]="K7";FitCoefDisplayW[7][2]="p2_int";FitCoefDisplayW[7][4]="0";FitCoefDisplayW[7][6]="0"
			FitCoefDisplayW[8][1]="K8";FitCoefDisplayW[8][2]="p2_pos";FitCoefDisplayW[8][4]="0"
			FitCoefDisplayW[9][1]="K9";FitCoefDisplayW[9][2]="p2_fwhm";FitCoefDisplayW[9][4]="1";FitCoefDisplayW[9][6]="0.1";FitCoefDisplayW[9][7]="3"
			FitCoefDisplayW[10][1]="K10";FitCoefDisplayW[10][2]="p2_mix";FitCoefDisplayW[10][4]="0.5";FitCoefDisplayW[10][6]="0.001";FitCoefDisplayW[10][7]="0.999"
			FitCoefDisplayW[11][1]="K11";FitCoefDisplayW[11][2]="p2_as";FitCoefDisplayW[11][4]="0.5";FitCoefDisplayW[11][6]="0.001";FitCoefDisplayW[11][7]="0.999"
			//Peak3
			FitCoefDisplayW[12][1]="K12";FitCoefDisplayW[12][2]="p3_int";FitCoefDisplayW[12][4]="0";FitCoefDisplayW[12][6]="0"
			FitCoefDisplayW[13][1]="K13";FitCoefDisplayW[13][2]="p3_pos";FitCoefDisplayW[13][4]="0"
			FitCoefDisplayW[14][1]="K14";FitCoefDisplayW[14][2]="p3_fwhm";FitCoefDisplayW[14][4]="1";FitCoefDisplayW[14][6]="0.1";FitCoefDisplayW[14][7]="3"
			FitCoefDisplayW[15][1]="K15";FitCoefDisplayW[15][2]="p3_mix";FitCoefDisplayW[15][4]="0.5";FitCoefDisplayW[15][6]="0.001";FitCoefDisplayW[15][7]="0.999"
			FitCoefDisplayW[16][1]="K16";FitCoefDisplayW[16][2]="p3_as";FitCoefDisplayW[16][4]="0.5";FitCoefDisplayW[16][6]="0.001";FitCoefDisplayW[16][7]="0.999"
			//The rest are calculated from fit params and can be used for mapping (cannot do guess or set constraints)
			FitCoefDisplayW[17][2]="p1_area";FitCoefDisplaySelW[17][4,7]=0
			FitCoefDisplayW[18][2]="p2_area";FitCoefDisplaySelW[18][4,7]=0
			FitCoefDisplayW[19][2]="p3_area";FitCoefDisplaySelW[19][4,7]=0
			FitCoefDisplayW[20][2]="custom1";FitCoefDisplayW[20][4]="<Formula>";FitCoefDisplaySelW[20][4]=2;FitCoefDisplaySelW[20][5,7]=0
			FitCoefDisplayW[21][2]="custom2";FitCoefDisplayW[21][4]="<Formula>";FitCoefDisplaySelW[21][4]=2;FitCoefDisplaySelW[21][5,7]=0
			FitCoefDisplaySelW[22,255][0,15]=0//Clear all unused cells
			FitCoefDisplaySelW[3][0]=48 //Select p1_pos (most used one)
			Break
		Case "4GLAs":			
			//Linear BG
			FitCoefDisplayW[0][1]="K0";FitCoefDisplayW[0][2]="Line offset";FitCoefDisplayW[0][4]="0"
			FitCoefDisplayW[1][1]="K1";FitCoefDisplayW[1][2]="Line slope";FitCoefDisplayW[1][4]="0"
			//Peak1
			FitCoefDisplayW[2][1]="K2";FitCoefDisplayW[2][2]="p1_int";FitCoefDisplayW[2][4]="0";FitCoefDisplayW[2][6]="0"
			FitCoefDisplayW[3][1]="K3";FitCoefDisplayW[3][2]="p1_pos";FitCoefDisplayW[3][4]="0";
			FitCoefDisplayW[4][1]="K4";FitCoefDisplayW[4][2]="p1_fwhm";FitCoefDisplayW[4][4]="1";FitCoefDisplayW[4][6]="0.1";FitCoefDisplayW[4][7]="3"
			FitCoefDisplayW[5][1]="K5";FitCoefDisplayW[5][2]="p1_mix";FitCoefDisplayW[5][4]="0.5";FitCoefDisplayW[5][6]="0.001";FitCoefDisplayW[5][7]="0.999"
			FitCoefDisplayW[6][1]="K6";FitCoefDisplayW[6][2]="p1_as";FitCoefDisplayW[6][4]="0.5";FitCoefDisplayW[6][6]="0.001";FitCoefDisplayW[6][7]="0.999"
			//Peak2
			FitCoefDisplayW[7][1]="K7";FitCoefDisplayW[7][2]="p2_int";FitCoefDisplayW[7][4]="0";FitCoefDisplayW[7][6]="0"
			FitCoefDisplayW[8][1]="K8";FitCoefDisplayW[8][2]="p2_pos";FitCoefDisplayW[8][4]="0"
			FitCoefDisplayW[9][1]="K9";FitCoefDisplayW[9][2]="p2_fwhm";FitCoefDisplayW[9][4]="1";FitCoefDisplayW[9][6]="0.1";FitCoefDisplayW[9][7]="3"
			FitCoefDisplayW[10][1]="K10";FitCoefDisplayW[10][2]="p2_mix";FitCoefDisplayW[10][4]="0.5";FitCoefDisplayW[10][6]="0.001";FitCoefDisplayW[10][7]="0.999"
			FitCoefDisplayW[11][1]="K11";FitCoefDisplayW[11][2]="p2_as";FitCoefDisplayW[11][4]="0.5";FitCoefDisplayW[11][6]="0.001";FitCoefDisplayW[11][7]="0.999"
			//Peak3
			FitCoefDisplayW[12][1]="K12";FitCoefDisplayW[12][2]="p3_int";FitCoefDisplayW[12][4]="0";FitCoefDisplayW[12][6]="0"
			FitCoefDisplayW[13][1]="K13";FitCoefDisplayW[13][2]="p3_pos";FitCoefDisplayW[13][4]="0"
			FitCoefDisplayW[14][1]="K14";FitCoefDisplayW[14][2]="p3_fwhm";FitCoefDisplayW[14][4]="1";FitCoefDisplayW[14][6]="0.1";FitCoefDisplayW[14][7]="3"
			FitCoefDisplayW[15][1]="K15";FitCoefDisplayW[15][2]="p3_mix";FitCoefDisplayW[15][4]="0.5";FitCoefDisplayW[15][6]="0.001";FitCoefDisplayW[15][7]="0.999"
			FitCoefDisplayW[16][1]="K16";FitCoefDisplayW[16][2]="p3_as";FitCoefDisplayW[16][4]="0.5";FitCoefDisplayW[16][6]="0.001";FitCoefDisplayW[16][7]="0.999"
			//Peak4
			FitCoefDisplayW[17][1]="K17";FitCoefDisplayW[17][2]="p4_int";FitCoefDisplayW[17][4]="0";FitCoefDisplayW[17][6]="0"
			FitCoefDisplayW[18][1]="K18";FitCoefDisplayW[18][2]="p4_pos";FitCoefDisplayW[18][4]="0"
			FitCoefDisplayW[19][1]="K19";FitCoefDisplayW[19][2]="p4_fwhm";FitCoefDisplayW[19][4]="1";FitCoefDisplayW[19][6]="0.1";FitCoefDisplayW[19][7]="3"
			FitCoefDisplayW[20][1]="K20";FitCoefDisplayW[20][2]="p4_mix";FitCoefDisplayW[20][4]="0.5";FitCoefDisplayW[20][6]="0.001";FitCoefDisplayW[20][7]="0.999"
			FitCoefDisplayW[21][1]="K21";FitCoefDisplayW[21][2]="p4_as";FitCoefDisplayW[21][4]="0.5";FitCoefDisplayW[21][6]="0.001";FitCoefDisplayW[21][7]="0.999"
			//The rest are calculated from fit params and can be used for mapping (cannot do guess or set constraints)
			FitCoefDisplayW[22][2]="p1_area";FitCoefDisplaySelW[22][4,7]=0
			FitCoefDisplayW[23][2]="p2_area";FitCoefDisplaySelW[23][4,7]=0
			FitCoefDisplayW[24][2]="p3_area";FitCoefDisplaySelW[24][4,7]=0
			FitCoefDisplayW[25][2]="p4_area";FitCoefDisplaySelW[25][4,7]=0
			FitCoefDisplayW[26][2]="custom1";FitCoefDisplayW[26][4]="<Formula>";FitCoefDisplaySelW[26][4]=2;FitCoefDisplaySelW[26][5,7]=0
			FitCoefDisplayW[27][2]="custom2";FitCoefDisplayW[27][4]="<Formula>";FitCoefDisplaySelW[27][4]=2;FitCoefDisplaySelW[27][5,7]=0
			FitCoefDisplaySelW[28,255][0,15]=0//Clear all unused cells
			FitCoefDisplaySelW[3][0]=48 //Select p1_pos (most used one)
			Break
	EndSwitch
	
	SLP_IXPS_MakeGuessCurve(VolName,FitName)
	
End





Function /S SLP_IXPS_FindLayer(PlotName)
	String PlotName
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName


	Variable PlotNum
	StrSwitch(PlotName)
		Case "IX_RawEXT1":
			PlotNum=1
			Break
		Case "IX_RawEXT2":
			PlotNum=2
			Break
		Case "IX_RawEXT3":
			PlotNum=3
			Break
		Case "IX_RawEXT4":
			PlotNum=4
			Break
		Case "IX_RawEXT5":
			PlotNum=5
			Break
		Case "IX_RawEXT6":
			PlotNum=6
			Break
	EndSwitch
	
	Variable i=0 //Index
	Variable j=0 //Plot number
	Variable k=0 //Layer (plane) number 
	
	For (i=0;i<dimsize(FitCoefDisplaySelW,0);i+=1)
		If (FitCoefDisplaySelW[i][8]==48)
			j+=1
		Endif
		If (j==PlotNum)
			Break
		Endif
		If (FitCoefDisplaySelW[i][0]==48)
			k+=1
		EndIf
	EndFor
	
	Return num2str(k)+";"+num2str(i)
End

Function CheckProc_IXPS_SelImage_old(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			//print cba.checked
			//print cba.ctrlName
			
			NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
			NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
			SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			//Waves and wave refs.
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String UMap1W_FName=ImgVolW_FName+"_UMap1"
			String Corr1W_FName=ImgVolW_FName+"_Corr1"
			String CMap1W_FName=ImgVolW_FName+"_CMap1"
			If (Exists(UMap1W_FName))
				Wave UMap1W=$UMap1W_FName
			Endif
			
			If (Exists(Corr1W_FName))
				Wave Corr1W=$Corr1W_FName
			Endif
			
			If (Exists(CMap1W_FName))
				Wave CMap1W=$CMap1W_FName
			EndIf
			
			String HistogramW_FName
			
			//Trick from man page of CheckBox
			Variable  gRadioVal
			strswitch (cba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "CheckBox_SelImg1":
					gRadioVal= 1
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt1"
					
					//WaveStats /Q UMap1W
					//HistogramW_FName=ImgVolW_FName+"_UMap1H"
					break
				case "CheckBox_SelImg2":
					gRadioVal= 2
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt2"
					
					break
				case "CheckBox_SelImg3":
					gRadioVal= 3
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt3"
					
					break
				case "CheckBox_SelImg4":
					gRadioVal= 4
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt4"
					
					break
				case "CheckBox_SelImg5":
					gRadioVal= 5
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt5"
					
					break
				case "CheckBox_SelImg6":
					gRadioVal= 6
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt6"
					
					break
				case "CheckBox_SelImgCorr":
					gRadioVal= 7
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_Correction1"
					
					break
				case "CheckBox_SelImgCMap":
					gRadioVal= 8
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_ResultMap1"
					
					break
			endswitch
			
			SLP_IXPS_ScanListW[SelRow][47]=SelSubWindow
			
			CheckBox CheckBox_SelImg1,value= (gRadioVal==1),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg2,value= (gRadioVal==2),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg3,value= (gRadioVal==3),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg4,value= (gRadioVal==4),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg5,value= (gRadioVal==5),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg6,value= (gRadioVal==6),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImgCorr,value= (gRadioVal==7),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImgCMap,value= (gRadioVal==8),win=SLP_ImgXPS_Panel_01
			
			If (Exists(HistogramW_FName))
				SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Histogram",HistogramW_FName,0)
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mirror=1,minor=1,tick(left)=0,tick(bottom)=2
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram  margin(bottom)=20,margin(left)=3,margin(top)=3,margin(right)=3
				ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mode=5,hbFill=2,rgb=(1,34817,52428)
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_CreateUMap(VolName,Bin)
	String VolName
	Variable Bin
	
	//Find the current selected row
  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
	String UMap1W_FName=ImgVolW_FName+"_UMap1"
	String Corr1W_FName=ImgVolW_FName+"_Corr1"
	String CMap1W_FName=ImgVolW_FName+"_CMap1"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	Variable i=0
	Variable j=0
	Variable k=0
	
	If (Exists(MapVolW_FName))
		For (i=0;i<dimsize(FitCoefDisplaySelW,0)&&j<1;i+=1)
			If (FitCoefDisplaySelW[i][9]==48)
				Duplicate /O /R=[][][k] $MapVolW_FName,$UMap1W_FName /WAVE=UMap1W
				Redimension /N=(dimsize(UMap1W,0),dimsize(UMap1W,1)) UMap1W //Convert 3D to 2D wave
				j+=1
			Endif
			If (FitCoefDisplaySelW[i][0]==48)
				k+=1
			EndIf		
		EndFor
	EndIf
	
	//Set x-y scale for the newly created map
	variable FOV=str2num(SLP_IXPS_ScanListW[SelRow][32])
	variable xMin=str2num(SLP_IXPS_ScanListW[SelRow][28])
	variable xMax=str2num(SLP_IXPS_ScanListW[SelRow][29])
	variable yMin=str2num(SLP_IXPS_ScanListW[SelRow][30])
	variable yMax=str2num(SLP_IXPS_ScanListW[SelRow][31])
	SLP_IXPS_SetXYScale(UMap1W_FName,FOV,xMin,xMax,yMin,yMax,Bin)
	
	Duplicate /O $UMap1W_FName,$Corr1W_FName /WAVE=Corr1W
	Corr1W=0
	Duplicate /O $UMap1W_FName,$CMap1W_FName
End

Function /S SLP_Util_ImgAutoScale(ImgW_FName,plane)
	String ImgW_FName
	Variable plane
	
	Wave ImgW=$ImgW_FName
	
	If (dimsize(ImgW,2)>1)
		ImageHistogram /P=(plane) ImgW
	Else
		ImageHistogram ImgW
	EndIf
	
	Wave W_ImageHist
	CurveFit /N/Q/NTHR=0 gauss  W_ImageHist /D 
	Wave W_coef
	
	Variable DLLim=W_coef[2]-0.5*W_coef[3]
	Variable DULim=W_coef[2]+0.5*W_coef[3]
	
	killwaves W_ImageHist
	killwaves W_coef
	
	Return num2str(DLLim)+";"+num2str(DULim)

End

Function SLP_IXPS_CreateParamMap(VolName,bin,FittingName,LLim,ULim)
	String VolName
	Variable bin
	String FittingName
	Variable LLim,ULim
	
	NVAR ExtProgress=root:Package_SLP:ImgXPS:ExtProgress
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	//String Current_Folder=GetDataFolder(1)
	//SetDataFolder $DataFolder_FName

	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ScrnMskW_FName=ImgVolW_FName+"_Scrn"
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String MapVolW_FName=ImgVolW_FName+"_MapVol"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"//Histogram
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS" 
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ScrnMskW=$ScrnMskW_FName
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	variable N_Params=0
	string ExtCmd=""
	variable SVPoint=21
	
	variable i=0
	variable j=0
	variable k=0
	
	//Create a volume wave to contain the extraction result
	strswitch(FittingName)	
		case "Secondary yield cut-off":
			N_Params=4
			break
		case "LEEM cut-off":
			Prompt SVPoint,"No. of points for smoothing (odd interger):"
			DoPrompt "Smoothing option",SVPoint
			N_Params=4
			break
		case "1GLA":
			N_Params=10
			break
		case "2GLAs":
			N_Params=16
			//ExtCmd="SLP_IXPS_Extract2GLAs(VolName,LLim,ULim)"
			break
		case "3GLAs":
			N_Params=22
			break
		case "4GLAs":
			N_Params=28
			break
	EndSwitch
	
	Make /O/N=(Ceil(dimsize(ImgVolW,0)/Bin),Ceil(dimsize(ImgVolW,1)/Bin),N_Params) $MapVolW_FName /Wave=MapVolW
	MapVolW=NaN //Set BG to NAN
	Variable FOV=str2num(SLP_IXPS_ScanListW[DataRow][32])
	Variable xMin=str2num(SLP_IXPS_ScanListW[DataRow][28])
	Variable xMax=str2num(SLP_IXPS_ScanListW[DataRow][29])
	Variable yMin=str2num(SLP_IXPS_ScanListW[DataRow][30])
	Variable yMax=str2num(SLP_IXPS_ScanListW[DataRow][31]) 
	SLP_IXPS_SetXYScale(MapVolW_FName,FOV,xMin,xMax,yMin,yMax,Bin) //[FUNC]SLP_IXPS_SetXYScale
	
	ExtProgress=0
	variable N_points=sum(ScrnMskW)/Bin^2
	
	FindValue /V=48 FitCoefDisplaySelW
	Variable MapParamSel1=V_Value
	
	SLP_IXPS_FitConstraints(VolName) //[FUNC]SLP_IXPS_FitConstraints
	
	For (i=0;i<dimsize(ImgVolW,0);i+=Bin)
		For (j=0;j<dimsize(ImgVolW,1);j+=Bin)
			If (ScrnMskW[i][j])
				SLP_IXPS_ExtractZProfile(VolName,i,j,Bin)
				
				Strswitch(FittingName)	// string switch
					case "Secondary yield cut-off":
						SLP_IXPS_ExtCutoff(VolName) //[FUNC]SLP_IXPS_ExtCutoff
						break
					case "LEEM cut-off":
						SLP_IXPS_LEEMCutOff(VolName,SVPoint) //[FUNC]SLP_IXPS_LEEMCutOff
						break
					case "1GLA":
						SLP_IXPS_Extract1GLA(VolName,LLim,ULim) //[FUNC]SLP_IXPS_Extract1GLA
						break
					case "2GLAs":
						SLP_IXPS_Extract2GLAs(VolName,LLim,ULim) //[FUNC]SLP_IXPS_Extract2GLAs
						break
					case "3GLAs":
						SLP_IXPS_Extract3GLAs(VolName,LLim,ULim) //[FUNC]SLP_IXPS_Extract3GLAs
						break
					case "4GLAs":
						SLP_IXPS_Extract4GLAs(VolName,LLim,ULim) //[FUNC]SLP_IXPS_Extract4GLAs
						break
				EndSwitch
				
				MapVolW[i/Bin][j/Bin][]=str2num(FitCoefDisplayW[r][3])
					
				k+=1
				ExtProgress=k/N_points*100
			EndIf
		EndFor
	EndFor	
	
	//SetDataFolder $Current_Folder
End

Function SLP_IXPS_MakeGuessCurve(VolName,FitName)
	string VolName,FitName
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitZProfW_FName=DataFolder_FName+"fit_"+VolName+"_zProfl"
	
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitZProfW=$FitZProfW_FName
	variable Line_Offset, Line_Slope
	variable p1_int,p1_pos,p1_fwhm,p1_mix,p1_as
	variable p2_int,p2_pos,p2_fwhm,p2_mix,p2_as
	variable p3_int,p3_pos,p3_fwhm,p3_mix,p3_as
	variable p4_int,p4_pos,p4_fwhm,p4_mix,p4_as
	
	strswitch(FitName)	// string switch
		Case "Secondary yield cut-off":		// execute if case matches expression
			FitZProfW=1*Erf((x-0)/str2num(FitCoefDisplayW[3][4]))
			Break
		Case "1GLA":			
			 Line_Offset=str2num(FitCoefDisplayW[0][4])
			 Line_Slope=str2num(FitCoefDisplayW[1][4])
			 P1_int=str2num(FitCoefDisplayW[2][4])
			 P1_pos=str2num(FitCoefDisplayW[3][4])
			 p1_fwhm=str2num(FitCoefDisplayW[4][4])
			 p1_mix=str2num(FitCoefDisplayW[5][4])
			 p1_as=str2num(FitCoefDisplayW[6][4])
			FitZProfW=Line_Offset+x*Line_Slope+SLP_Func_InvGLA(p1_int,p1_pos,p1_fwhm,p1_mix,p1_as,x)
			Break	
		Case "2GLAs":			
			 Line_Offset=str2num(FitCoefDisplayW[0][4])
			 Line_Slope=str2num(FitCoefDisplayW[1][4])
			 P1_int=str2num(FitCoefDisplayW[2][4])
			 P1_pos=str2num(FitCoefDisplayW[3][4])
			 p1_fwhm=str2num(FitCoefDisplayW[4][4])
			 p1_mix=str2num(FitCoefDisplayW[5][4])
			 p1_as=str2num(FitCoefDisplayW[6][4])
			 p2_int=str2num(FitCoefDisplayW[7][4])
			 p2_pos=str2num(FitCoefDisplayW[8][4])
			 p2_fwhm=str2num(FitCoefDisplayW[9][4])
			 p2_mix=str2num(FitCoefDisplayW[10][4])
			 p2_as=str2num(FitCoefDisplayW[11][4])
			FitZProfW=Line_Offset+x*Line_Slope+SLP_Func_InvGLA(p1_int,p1_pos,p1_fwhm,p1_mix,p1_as,x)+SLP_Func_InvGLA(p2_int,p2_pos,p2_fwhm,p2_mix,p2_as,x)
			Break
		Case "3GLAs":			
			 Line_Offset=str2num(FitCoefDisplayW[0][4])
			 Line_Slope=str2num(FitCoefDisplayW[1][4])
			 P1_int=str2num(FitCoefDisplayW[2][4])
			 P1_pos=str2num(FitCoefDisplayW[3][4])
			 p1_fwhm=str2num(FitCoefDisplayW[4][4])
			 p1_mix=str2num(FitCoefDisplayW[5][4])
			 p1_as=str2num(FitCoefDisplayW[6][4])
			 p2_int=str2num(FitCoefDisplayW[7][4])
			 p2_pos=str2num(FitCoefDisplayW[8][4])
			 p2_fwhm=str2num(FitCoefDisplayW[9][4])
			 p2_mix=str2num(FitCoefDisplayW[10][4])
			 p2_as=str2num(FitCoefDisplayW[11][4])
			 p3_int=str2num(FitCoefDisplayW[12][4])
			 p3_pos=str2num(FitCoefDisplayW[13][4])
			 p3_fwhm=str2num(FitCoefDisplayW[14][4])
			 p3_mix=str2num(FitCoefDisplayW[15][4])
			 p3_as=str2num(FitCoefDisplayW[16][4])
			FitZProfW=Line_Offset+x*Line_Slope+SLP_Func_InvGLA(p1_int,p1_pos,p1_fwhm,p1_mix,p1_as,x)+SLP_Func_InvGLA(p2_int,p2_pos,p2_fwhm,p2_mix,p2_as,x)+SLP_Func_InvGLA(p3_int,p3_pos,p3_fwhm,p3_mix,p3_as,x)
			Break
		Case "4GLAs":			
			 Line_Offset=str2num(FitCoefDisplayW[0][4])
			 Line_Slope=str2num(FitCoefDisplayW[1][4])
			 P1_int=str2num(FitCoefDisplayW[2][4])
			 P1_pos=str2num(FitCoefDisplayW[3][4])
			 p1_fwhm=str2num(FitCoefDisplayW[4][4])
			 p1_mix=str2num(FitCoefDisplayW[5][4])
			 p1_as=str2num(FitCoefDisplayW[6][4])
			 p2_int=str2num(FitCoefDisplayW[7][4])
			 p2_pos=str2num(FitCoefDisplayW[8][4])
			 p2_fwhm=str2num(FitCoefDisplayW[9][4])
			 p2_mix=str2num(FitCoefDisplayW[10][4])
			 p2_as=str2num(FitCoefDisplayW[11][4])
			 p3_int=str2num(FitCoefDisplayW[12][4])
			 p3_pos=str2num(FitCoefDisplayW[13][4])
			 p3_fwhm=str2num(FitCoefDisplayW[14][4])
			 p3_mix=str2num(FitCoefDisplayW[15][4])
			 p3_as=str2num(FitCoefDisplayW[16][4])
			 p4_int=str2num(FitCoefDisplayW[17][4])
			 p4_pos=str2num(FitCoefDisplayW[18][4])
			 p4_fwhm=str2num(FitCoefDisplayW[19][4])
			 p4_mix=str2num(FitCoefDisplayW[20][4])
			 p4_as=str2num(FitCoefDisplayW[21][4])
			FitZProfW=Line_Offset+x*Line_Slope+SLP_Func_InvGLA(p1_int,p1_pos,p1_fwhm,p1_mix,p1_as,x)+SLP_Func_InvGLA(p2_int,p2_pos,p2_fwhm,p2_mix,p2_as,x)+SLP_Func_InvGLA(p3_int,p3_pos,p3_fwhm,p3_mix,p3_as,x)+SLP_Func_InvGLA(p4_int,p4_pos,p4_fwhm,p4_mix,p4_as,x)
			Break
	
	EndSwitch

End



Function ButtonProc_IXPS_ScrnMskDraw(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			//Clear the screen mask (red x-y wave from Particle Analysis)
			String TraceName=stringfromlist(0,TraceNameList("SLP_ImgXPS_Panel_01#IX_ImgW",";",3),";")
			If (itemsinlist(TraceNameList("SLP_ImgXPS_Panel_01#IX_ImgW",";",3))!=0)
				RemoveFromGraph /W=SLP_ImgXPS_Panel_01#IX_ImgW $TraceName
			EndIf
			
			SetActiveSubwindow SLP_ImgXPS_Panel_01#IX_ImgW
			DrawAction delete
			
			showtools /A oval
			SetDrawLayer ProgFront
			TitleBox title_ScrnMskDraw title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {100,0},frame=0
			SetDrawEnv fillpat= 0,linefgc=(65535,0,0)
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End			

Function ButtonProc_IXPS_ScrnMskCreate(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SetActiveSubwindow SLP_ImgXPS_Panel_01#IX_ImgW
			
			String ImageVolName=stringfromlist(0,ImageNameList("SLP_ImgXPS_Panel_01#IX_ImgW",";"),";")
			ImageGenerateROIMask /E=0 /I=1 $ImageVolName
			TitleBox title_ScrnMskDraw disable=1
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String ScrnMskW_FName=ImgVolW_FName+"_Scrn"
			Wave ScrnMskW=$ScrnMskW_FName
			ScrnMskW=1 //Reset the screen mask
			
			If(Exists("M_ROIMask"))
				Wave M_ROIMask
				ScrnMskW=M_ROIMask*ScrnMskW
				killwaves M_ROIMask
			Endif
			
			//Find edge of the screen for scaling
			Variable pMin=dimsize(ScrnMskW,0)
			Variable pMax=0
			Variable qMin=dimsize(ScrnMskW,1)
			Variable qMax=0
			Variable i,j
			
			Do
				Do
					j+=1
				While (j<dimsize(ScrnMskW,1)&&ScrnMskW[i][j]==0)
				If (j<qMin)
					qMin=j
				EndIf
				j=dimsize(ScrnMskW,1)
				Do
					j-=1
				While (j>0&&ScrnMskW[i][j]==0)
				If (j>qMax)
					qMax=j
				EndIf
				j=0
				i+=1
			While (i<dimsize(ScrnMskW,0))
			
			i=0
			j=0
			Do
				Do
					i+=1
				While (i<dimsize(ScrnMskW,0)&&ScrnMskW[i][j]==0)
				If (i<pMin)
					pMin=i
				EndIf
				i=dimsize(ScrnMskW,0)
				Do
					i-=1
				While (i>0&&ScrnMskW[i][j]==0)
				If (i>pMax)
					pMax=i
				EndIf
				i=0
				j+=1
			While (j<dimsize(ScrnMskW,1))

			SLP_IXPS_ScanListW[SelRow][28]=num2str(pMin)
			SLP_IXPS_ScanListW[SelRow][29]=num2str(pMax)
			SLP_IXPS_ScanListW[SelRow][30]=num2str(qMin)
			SLP_IXPS_ScanListW[SelRow][31]=num2str(qMax)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function SLP_IXPS_LEEMCutOff(VolName,SVPoint)
	String VolName	
	Variable SVPoint
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	String Current_Folder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String ZProfD1W_FName=ImgVolW_FName+"_zPD1" //1st order diff.
	String ZProfD1SmW_FName=ImgVolW_FName+"_zPD1Sm" //1st order diff.	 + smoothed
	String ZProfD2W_FName=ImgVolW_FName+"_zPD2" //2st order diff.
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	NVAR ULim=root:Package_SLP:ImgXPS:ULim
	NVAR LLim=root:Package_SLP:ImgXPS:LLim
	
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	
	//Create Coef. wave
	Make /O/D/N=4 $FitCoefW_FName /WAVE=FitCoefW
	
	//Use algorithm to guess the starting values
	wavestats /Q/R=(LLim,ULim) ZProfW
	
	FitCoefW[0]=V_minloc
	
	Differentiate ZProfW/D=$ZProfD1W_FName;DelayUpdate
	Wave W_DIF1=$ZProfD1W_FName
	Duplicate /O W_DIF1,$ZProfD1SmW_FName /Wave=W_D1Sm
	Smooth/S=2 SVPoint,W_D1Sm
	Smooth/S=2 SVPoint,W_D1Sm
	Differentiate W_D1Sm /D=$ZProfD2W_FName
	Wave W_DIF2=$ZProfD2W_FName
	
	wavestats /Q/R=(LLim,ULim) W_D1Sm
	FitCoefW[1]=V_minloc
	
	wavestats /Q/R=(LLim,ULim) W_DIF2
	FitCoefW[2]=V_minloc
	FitCoefW[3]=V_maxloc
	
	//Put the fit result in col. 3 of FitCoefDisplayW
	FitCoefDisplayW[0,3][3]=num2str(FitCoefW[p])
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	If (V_Value==0) //If not in 'Fast Mode' = display results during the extraction
		
		If (whichlistitem("W_DIF1",TraceNameList("SLP_ImgXPS_Panel_01#IX_FITTINGWIN",";",1))==-1)
			Appendtograph /W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /R=right W_DIF1 /TN=W_DIF1
			Appendtograph /W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /R=right  W_D1Sm /TN= W_D1Sm
			Appendtograph /W=SLP_ImgXPS_Panel_01#IX_FITTINGWIN /R=right  W_DIF2  /TN=W_DIF2
			Modifygraph rgb(W_DIF1)=(60000,0,60000)
			Modifygraph rgb(W_D1Sm)=(0,60000,0)
			Modifygraph rgb(W_DIF2)=(0,0,60000)
		Endif
		
		DoUpdate
	Endif
	
	SetDataFolder $Current_Folder
	
	//return FitCoefW[2] //Return x0 (cut-off position)
End


Function SLP_IXPS_CreateCutoffMap(VolName,bin)
	String VolName
	variable bin
	
	NVAR ExtProgress=root:Package_SLP:ImgXPS:ExtProgress
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	String Current_Folder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ScrnMskW_FName=ImgVolW_FName+"_Scrn"
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String UnprocMap1_FName=ImgVolW_FName+"_Umap1"
	String UnprocMap1H_FName=ImgVolW_FName+"_Umap1H"//Histogram
	
	SetDataFolder $DataFolder_FName
	
	Wave ImgVolW=$ImgVolW_FName
	Wave ScrnMskW=$ScrnMskW_FName
	Make /O/N=(Ceil(dimsize(ImgVolW,0)/Bin),Ceil(dimsize(ImgVolW,1)/Bin)) $UnprocMap1_FName /Wave=UnprocMap1
	UnprocMap1=NaN //Set BG to NAN
	
	variable i=0
	variable j=0
	variable k=0
	ExtProgress=0
	variable N_points=sum(ScrnMskW)/Bin^2
	
	For (i=0;i<dimsize(ImgVolW,0);i+=Bin)
		For (j=0;j<dimsize(ImgVolW,1);j+=Bin)
			If (ScrnMskW[i][j])
				SLP_IXPS_ExtractZProfile(VolName,i,j,Bin)
				UnprocMap1[i/Bin][j/Bin]=SLP_IXPS_ExtCutoff(VolName)
				k+=1
				ExtProgress=k/N_points*100
				//print "Extracting "+num2str(ExtProgress)+" %"
			//Else
				//UnprocMap1[i/Bin][j/Bin]=UnProcMap1_BG //Set background to -5.1 eV (0.1eV smaller than min. STV)
			EndIf
		EndFor
	EndFor
	
	Make /O $UnprocMap1H_FName /WAVE=UnprocMap1H
	Histogram /B=4 UnprocMap1,UnprocMap1H
	
	SetDataFolder $Current_Folder
End






Function ButtonProc_IXPS_ChooseCor1W(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			String SelectedWaveFName=""
			Execute "CreateBrowser prompt=\"Select image wave to be used for value correction\", showWaves=1, showVars=0, showStrs=0" 
			//Old style. in Igor7 no need to use Execute
			SVAR S_BrowserList=S_BrowserList
			NVAR V_Flag=V_Flag
			if(V_Flag!=0)
				SelectedWaveFName=stringfromlist(0,S_BrowserList)
			endif
					  	
			SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Correction1",S_BrowserList,1)
			SLP_IXPS_LoadCorrectionW1(SelectedWaveFName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_LoadCorrectionW1(Original_Corr1WFName)
	String Original_Corr1WFName
	
	//Can't put this in the ButtonProc because of conflict with CreateBrowser command in ButtonProc_IXPS_ChooseCor1W
	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
	Variable SelRow=V_Value
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	SLP_IXPS_ScanListW[SelRow][33]=Original_Corr1WFName
	String VolName=SLP_IXPS_ScanListW[SelRow][0]
	String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
	String Umap1W_FName=ImgVolW_FName+"_Umap1"
	String Corr1W_FName=ImgVolW_FName+"_Corr1"
	String Corr1HW_FName=ImgVolW_FName+"_Corr1H"
	String Cmap1W_FName=ImgVolW_FName+"_Cmap1"
	
	Wave Original_Corr1W=$Original_Corr1WFName
	
	Duplicate /O Original_Corr1W,$Corr1W_FName /WAVE=Corr1W
	
	Make /O $Corr1HW_FName /WAVE=Corr1HW
	Histogram /B=4 Corr1W,Corr1HW
	
	SLP_IXPS_Correct1(VolName,0,0,1) //[TODO] - This must use the dx,dy, mag param. from WList
	
	//Automatically find the min and max of the color scale
	String DLimTxt=""
	DLimTxt=SLP_Util_ImgAutoScale(Corr1W_FName,0)
	SLP_IXPS_ScanListW[SelRow][18]=stringFromList(0,DLimTxt,";")
	SLP_IXPS_ScanListW[SelRow][19]=stringFromList(1,DLimTxt,";")
	DLimTxt=SLP_Util_ImgAutoScale(Cmap1W_FName,0)
	SLP_IXPS_ScanListW[SelRow][20]=stringFromList(0,DLimTxt,";")
	SLP_IXPS_ScanListW[SelRow][21]=stringFromList(1,DLimTxt,";")
	
	//Update the display
	SLP_IXPS_DisplaySelectedData(VolName)

End

Function SLP_IXPS_Correct1(VolName,x_offset,y_offset,int_scale)
	String VolName
	variable x_offset,y_offset //(in microns)
	variable int_scale //correct shift amplitude
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String UMap1W_FName=ImgVolW_FName+"_UMap1"
	String Corr1W_FName=ImgVolW_FName+"_Corr1"
	String CMap1W_FName=ImgVolW_FName+"_CMap1"
	String CMap1HW_FName=ImgVolW_FName+"_CMap1H"
	
	Wave UMap1W=$UMap1W_FName
	Wave Corr1W=$Corr1W_FName

	variable i,j
	
	Duplicate /O UMap1W,$CMap1W_FName /Wave=CMap1W
	
	Variable x_pos=0
	variable y_pos=0
	
	Variable Corr1WMinX=dimoffset(Corr1W,0)
	Variable Corr1WMaxX=dimoffset(Corr1W,0)+dimdelta(Corr1W,0)*(dimsize(Corr1W,0)-1)
	Variable Corr1WMinY=dimoffset(Corr1W,1)
	Variable Corr1WMaxY=dimoffset(Corr1W,1)+dimdelta(Corr1W,1)*(dimsize(Corr1W,1)-1)
	
	For (i=0;i<dimsize(CMap1W,0);i+=1)
		For (j=0;j<dimsize(CMap1W,1);j+=1)
			x_pos=DimOffset(CMap1W, 0) + i *DimDelta(CMap1W,0)
			y_pos=DimOffset(CMap1W, 1) + j *DimDelta(CMap1W,1)
			
			If(x_pos-x_offset>=Corr1WMinX&&x_pos-x_offset<=Corr1WMaxX&&y_pos-y_offset>=Corr1WMinY&&y_pos-y_offset<=Corr1WMaxY)
				CMap1W[i][j]+=Corr1W(x_pos-x_offset)(y_pos-y_offset)*int_Scale
			Else
				CMap1W[i][j]=NaN
			Endif
			//DoUpdate
		EndFor
	EndFor
	
	Make /O $CMap1HW_FName /WAVE=CMap1HW
	Histogram /B=4 CMap1W,CMap1HW
	
End

Function SLP_IXPS_Correct2(VolName,x_offset,y_offset,int_scale,Corr_Size,Corr_Rot)
	String VolName
	variable x_offset,y_offset //(in microns)
	variable int_scale //correct shift amplitude
	variable Corr_Size //Size of the correction
	variable Corr_Rot //Rotation
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String UMap1W_FName=ImgVolW_FName+"_UMap1"
	String Corr1W_FName=ImgVolW_FName+"_Corr1"
	String CMap1W_FName=ImgVolW_FName+"_CMap1"
	String CMap1HW_FName=ImgVolW_FName+"_CMap1H"
	
	Wave UMap1W=$UMap1W_FName
	Wave Corr1W=$Corr1W_FName

	variable i,j
	
	Duplicate /O UMap1W,$CMap1W_FName /Wave=CMap1W
	
	Variable x_pos=0
	variable y_pos=0
	
	Variable Corr1WMinX=dimoffset(Corr1W,0)
	Variable Corr1WMaxX=dimoffset(Corr1W,0)+dimdelta(Corr1W,0)*(dimsize(Corr1W,0)-1)
	Variable Corr1WMinY=dimoffset(Corr1W,1)
	Variable Corr1WMaxY=dimoffset(Corr1W,1)+dimdelta(Corr1W,1)*(dimsize(Corr1W,1)-1)
	
	Variable NewX=0
	Variable NewY=0
	
	For (i=0;i<dimsize(CMap1W,0);i+=1)
		For (j=0;j<dimsize(CMap1W,1);j+=1)
			x_pos=DimOffset(CMap1W, 0) + i *DimDelta(CMap1W,0)
			y_pos=DimOffset(CMap1W, 1) + j *DimDelta(CMap1W,1)
			
			NewX=(x_pos*cos(Corr_Rot*pi/180)-y_pos*sin(Corr_Rot*pi/180)-x_offset)/Corr_Size
			NewY=(x_pos*sin(Corr_Rot*pi/180)+y_pos*cos(Corr_Rot*pi/180)-y_offset)/Corr_Size
			
			If(NewX>=Corr1WMinX&&NewX<=Corr1WMaxX&&NewY>=Corr1WMinY&&NewY<=Corr1WMaxY)
				//CMap1W[i][j]+=Corr1W(x_pos-x_offset)(y_pos-y_offset)*int_Scale
				CMap1W[i][j]-=Corr1W(NewX)(NewY)*int_Scale
			Else
				CMap1W[i][j]=NaN
			Endif
			//DoUpdate
		EndFor
	EndFor
	
	Make /O $CMap1HW_FName /WAVE=CMap1HW
	Histogram /B=4 CMap1W,CMap1HW
	
End

Function CheckProc_SelImage(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			//print cba.checked
			//print cba.ctrlName
			
			NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
			NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
			SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			//Waves and wave refs.
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String UMap1W_FName=ImgVolW_FName+"_UMap1"
			String Corr1W_FName=ImgVolW_FName+"_Corr1"
			String CMap1W_FName=ImgVolW_FName+"_CMap1"
			//String UMap2W_FName=ImgVolW_FName+"_UMap2"
			//String Corr2W_FName=ImgVolW_FName+"_Corr2"
			//String CMap2W_FName=ImgVolW_FName+"_CMap2"
			If (Exists(UMap1W_FName))
				Wave UMap1W=$UMap1W_FName
			Endif
			
			If (Exists(Corr1W_FName))
				Wave Corr1W=$Corr1W_FName
			Endif
			
			If (Exists(CMap1W_FName))
				Wave CMap1W=$CMap1W_FName
			EndIf
			//Wave UMap2W=$UMap2W_FName
			//Wave Corr2W=$Corr2W_FName
			//Wave CMap2W=$CMap2W_FName
			
			String HistogramW_FName
			
			//Trick from man page of CheckBox
			Variable  gRadioVal
			strswitch (cba.ctrlName) //Name of the image (note the use of WMCheckBoxAction STRUCT)
				case "CheckBox_SelImg11":
					gRadioVal= 1
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt1"
					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][16])
					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][17])
					WaveStats /Q UMap1W
					HistogramW_FName=ImgVolW_FName+"_UMap1H"
					break
				case "CheckBox_SelImg12":
					gRadioVal= 2
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_Correction1"
					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][18])
					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][19])
					WaveStats /Q Corr1W
					HistogramW_FName=ImgVolW_FName+"_Corr1H"
					break
				case "CheckBox_SelImg13":
					gRadioVal= 3
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_ResultMap1"
					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][20])
					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][21])
					WaveStats /Q CMap1W
					HistogramW_FName=ImgVolW_FName+"_CMap1H"
					break
				case "CheckBox_SelImg21":
					gRadioVal= 4
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_RawExt2"
					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][22])
					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][23])
					WaveStats /Q UMap1W
					HistogramW_FName=ImgVolW_FName+"_UMap1H"
					//Future code - to use UMap2
					break
				case "CheckBox_SelImg22":
					gRadioVal= 5
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_Correction2"
					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][24])
					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][25])
					WaveStats /Q Corr1W
					HistogramW_FName=ImgVolW_FName+"_Corr1H"
					//Future code - to use Corr2
					break
				case "CheckBox_SelImg23":
					gRadioVal= 6
					SelSubWindow="SLP_ImgXPS_Panel_01#IX_ResultMap2"
					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][26])
					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][27])
					WaveStats /Q CMap1W
					HistogramW_FName=ImgVolW_FName+"_CMap1H"
					//Future code - to use CMap2
					break
			endswitch
			
			SLP_IXPS_ScanListW[SelRow][47]=SelSubWindow
			
			//SET Slider limits by min and max value
			//Slider Slider_ImgVolMinInt,limits={V_min,V_max,(V_max-V_min)/200}
			//Slider Slider_ImgVolMaxInt,limits={V_min,V_max,(V_max-V_min)/200}
			//SET Slider limits by Avg +- SD values 
			Slider Slider_ImgVolMinInt,limits={V_avg-3*V_sdev,V_avg+3*V_sdev,6*V_Sdev/200}
			Slider Slider_ImgVolMaxInt,limits={V_avg-3*V_sdev,V_avg+3*V_sdev,6*V_Sdev/200}

			
			CheckBox CheckBox_SelImg11,value= (gRadioVal==1),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg12,value= (gRadioVal==2),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg13,value= (gRadioVal==3),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg21,value= (gRadioVal==4),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg22,value= (gRadioVal==5),win=SLP_ImgXPS_Panel_01
			CheckBox CheckBox_SelImg23,value= (gRadioVal==6),win=SLP_ImgXPS_Panel_01
			
			If (Exists(HistogramW_FName))
				SLP_Util_AddnRmTraces("SLP_ImgXPS_Panel_01#IX_Histogram",HistogramW_FName,0)
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mirror=1,minor=1,tick(left)=0,tick(bottom)=2
				Modifygraph /W=SLP_ImgXPS_Panel_01#IX_Histogram  margin(bottom)=20,margin(left)=3,margin(top)=3,margin(right)=3
				ModifyGraph /W=SLP_ImgXPS_Panel_01#IX_Histogram mode=5,hbFill=2,rgb=(1,34817,52428)
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End


Function ButtonProc_IXPS_CopyFitCoef(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW 

			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			String TgtScanName=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			//String FitCoefW_FName=ImgVolW_FName+"_FCoef"
			String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
			String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
			String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
						
  					
			//Source scan (to copy from)
			String ScanList=""
			variable i=0
			variable N_Scans=dimsize(SLP_IXPS_ScanListW,0)
			String SrcScanName=""
			String TgtFitMode=SLP_IXPS_ScanListW[SelRow][48]
			String SrcFitMode=""
			//Create a list string which contains all the scans
			For (i=0;i<N_Scans;i+=1)
				SrcFitMode=SLP_IXPS_ScanListW[i][48]
				If (!Stringmatch(TgtScanName,SLP_IXPS_ScanListW[i][0])&&StringMatch(TgtFitMode,SrcFitMode))
					ScanList+=SLP_IXPS_ScanListW[i][0]+";"
				EndIf
			EndFor
			//Ask user to select the src. scan
			Prompt SrcScanName,"Scan",popup,ScanList
  			DoPrompt "Choose a scan to copy the dispersive line from",SrcScanName
  			If (V_Flag==0) //If user clicks 'Continue'
	  			Variable SrcDataRow=SLP_IXPS_FindDataRow(SrcScanName)
	  			String SrcImgVolW_FName=SLP_IXPS_ScanListW[SrcDataRow][1]+SLP_IXPS_ScanListW[SrcDataRow][0]
	  			//String SrcFitCoefW_FName=SrcImgVolW_FName+"_FCoef"
				String SrcFitCoefDisplayW_FName=SrcImgVolW_FName+"_FCoefD"
				String SrcFitCoefDisplaySelW_FName=SrcImgVolW_FName+"_FCoefDS"
				String SrcFitCoefConstraintsW_FName=SrcImgVolW_FName+"_FCoefC"
	  			
				//Duplicate /O $SrcFitCoefW_FName,$FitCoefW_FName
	  			Duplicate /O/T $SrcFitCoefDisplayW_FName,$FitCoefDisplayW_FName
	  			Duplicate /O $SrcFitCoefDisplaySelW_FName,$FitCoefDisplaySelW_FName
	  			Duplicate /O/T $SrcFitCoefConstraintsW_FName,$FitCoefConstraintsW_FName
	  			
	  			SLP_IXPS_DisplaySelectedData(TgtScanName)
  			EndIf
  			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_CopyScrn(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW 

			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			String TgtScanName=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String ScrnMskW_FName=ImgVolW_FName+"_Scrn"
			String BxW_FName=ImgVolW_FName+"_BX"
			String ByW_FName=ImgVolW_FName+"_BY"
						
  					
			//Source scan (to copy from)
			String ScanList=""
			variable i=0
			variable N_Scans=dimsize(SLP_IXPS_ScanListW,0)
			String SrcScanName=""
			//Create a list string which contains all the scans
			For (i=0;i<N_Scans;i+=1)
				If (!Stringmatch(TgtScanName,SLP_IXPS_ScanListW[i][0]))
					ScanList+=SLP_IXPS_ScanListW[i][0]+";"
				EndIf
			EndFor
			//Ask user to select the src. scan
			Prompt SrcScanName,"Scan",popup,ScanList
  			DoPrompt "Choose a scan to copy the dispersive line from",SrcScanName
  			If (V_Flag==0) //If user clicks 'Continue'
	  			Variable SrcDataRow=SLP_IXPS_FindDataRow(SrcScanName)
	  			String SrcImgVolW_FName=SLP_IXPS_ScanListW[SrcDataRow][1]+SLP_IXPS_ScanListW[SrcDataRow][0]
	  			String SrcScrnMskW_FName=SrcImgVolW_FName+"_Scrn"
				String SrcBxW_FName=SrcImgVolW_FName+"_BX"
				String SrcByW_FName=SrcImgVolW_FName+"_BY"
	  			
				Duplicate /O $SrcScrnMskW_FName,$ScrnMskW_FName
				Duplicate /O $SrcBxW_FName,$BxW_FName
				Duplicate /O $SrcByW_FName,$ByW_FName
	  			
	  			SLP_IXPS_DisplaySelectedData(TgtScanName)
  			EndIf
  			
  			//Copy the screen edges
  			SLP_IXPS_ScanListW[SelRow][28]=SLP_IXPS_ScanListW[SrcDataRow][28]
  			SLP_IXPS_ScanListW[SelRow][29]=SLP_IXPS_ScanListW[SrcDataRow][29]
  			SLP_IXPS_ScanListW[SelRow][30]=SLP_IXPS_ScanListW[SrcDataRow][30]
  			SLP_IXPS_ScanListW[SelRow][31]=SLP_IXPS_ScanListW[SrcDataRow][31]
  			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_CorrectColor13(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
			NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
			SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow
			SelSubWindow="SLP_ImgXPS_Panel_01#IX_ResultMap1"
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String CMap1W_FName=ImgVolW_FName+"_CMap1"
			Wave CMap1W=$CMap1W_FName
			
			ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][20])
			ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][21])
			
			WaveStats /Q CMap1W
			Slider Slider_ImgVolMinInt,limits={V_min,V_max,(V_max-V_min)/200},win=SLP_ImgXPS_Panel_01
			Slider Slider_ImgVolMaxInt,limits={V_min,V_max,(V_max-V_min)/200},win=SLP_ImgXPS_Panel_01
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function ButtonProc_IXPS_Done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K SLP_ImgXPS_Panel_01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_PlotImg(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			Variable ColorMin
			Variable ColorMax
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			Wave /T SLP_IXPS_ScanListDisplayW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListDisplayW
			String ImgVol_Name=SLP_IXPS_ScanListW[SelRow][0]
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String ImgVolW_Name=SLP_IXPS_ScanListW[SelRow][0]
			String UMap1W_FName=ImgVolW_FName+"_UMap1"
			String CMap1W_FName=ImgVolW_FName+"_CMap1"
			String UMap2W_FName=ImgVolW_FName+"_UMap2"
			String CMap2W_FName=ImgVolW_FName+"_CMap2"
			String UMap1W_Name=ImgVolW_Name+"_UMap1"
			String CMap1W_Name=ImgVolW_Name+"_CMap1"
			String MapVolW_FName=ImgVolW_FName+"_MapVol"
			String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
			String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
			
			Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
			Wave CMap1W=$CMap1W_FName
			
			String ExpImgName=""
			
			String SelPlaneTxt="0;0"
			variable SelPlane=0
			variable SelIndex=0
			NVAR Map_zBG_G=root:Package_SLP:ImgXPS:Map_zBG_G
			Variable Map_zBG=Map_zBG_G
			Variable pOffset,qOffset,zOrg
			Variable zOffset=0
			String NoteString="Imaging XPS extraction \r "+ImgVol_Name+"\r"
			
			strswitch(ba.CtrlName)	// string switch
				case "Button_PlotUMap1":		
					SelPlaneTxt=SLP_IXPS_FindLayer("IX_RawExt1")
					ExpImgName=ImgVol_Name+"_"+SLP_IXPS_ScanListW[SelRow][22]
					break
				case "Button_PlotUMap2":		
					SelPlaneTxt=SLP_IXPS_FindLayer("IX_RawExt2")
					ExpImgName=ImgVol_Name+"_"+SLP_IXPS_ScanListW[SelRow][23]
					break
				case "Button_PlotUMap3":		
					SelPlaneTxt=SLP_IXPS_FindLayer("IX_RawExt3")
					ExpImgName=ImgVol_Name+"_"+SLP_IXPS_ScanListW[SelRow][24]
					break
				case "Button_PlotUMap4":		
					SelPlaneTxt=SLP_IXPS_FindLayer("IX_RawExt4")
					ExpImgName=ImgVol_Name+"_"+SLP_IXPS_ScanListW[SelRow][25]
					break
				case "Button_PlotUMap5":		
					SelPlaneTxt=SLP_IXPS_FindLayer("IX_RawExt5")
					ExpImgName=ImgVol_Name+"_"+SLP_IXPS_ScanListW[SelRow][26]
					break
				case "Button_PlotUMap6":		
					SelPlaneTxt=SLP_IXPS_FindLayer("IX_RawExt6")
					ExpImgName=ImgVol_Name+"_"+SLP_IXPS_ScanListW[SelRow][26]
					break
				
				case "Button_PlotCMap1":		
//					ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][20])
//					ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][21])
					ExpImgName=CMap1W_Name
					//
					break
				
			endswitch
			
			SelPlane=str2num(stringfromlist(0,SelPlaneTxt,";"))
			SelIndex=str2num(stringfromlist(1,SelPlaneTxt,";"))
			String ExpImgName_New=ExpImgName
			If (CheckName(ExpImgName,1))//Check whether duplicate or illegal
				ExpImgName_New=cleanupname(uniqueName(ExpImgName,1,0),0)
				Prompt ExpImgName_New,"A new name is suggested below, or enter new name:"
				DoPrompt "Duplicate or illegal image wave name.",ExpImgName_New
			Endif
			
			If (Stringmatch(ExpImgName,CMap1W_Name)) //For cMap plot
				zOffset=0
				If (StringMatch(SLP_IXPS_ScanListW[SelRow][56],"1")) //If cursor is on
					DoAlert 1,"Offset selected point to a certain value?" 
					If (V_Flag==1) //Yes
						Prompt Map_zBG,"Shift to value:"
						DoPrompt "Enter value",Map_zBG
						If (V_Flag==0) //User clicks Continue
							Map_zBG_G=Map_zBG
							pOffset=pCsr(A,"SLP_ImgXPS_Panel_01#IX_ResultMap1")
							qOffset=qCsr(A,"SLP_ImgXPS_Panel_01#IX_ResultMap1")
							zOrg=CMap1W[pOffset][qOffset]
							zOffset=zOrg-Map_zBG
							NoteString+="Ref. point [p,q]: ["+num2str(pOffset)+","+num2str(qOffset)+"]\r"
							NoteString+="Ref. z value: "+num2str(Map_zBG)+"\r"
						EndIf						
					EndIf
//				Else
//					DoAlert 0,"Choose the reference position first"
//					Cursor /I A $CMap1W_Name round(dimsize(CMap1W,0)),round(dimsize(CMap1W,1))
//					Break					
				EndIf
			
				duplicate /O $CMap1W_FName,$ExpImgName_New /WAVE=NewImgW
				ColorMin=str2num(SLP_IXPS_ScanListW[SelRow][20])-zOffset
				ColorMax=str2num(SLP_IXPS_ScanListW[SelRow][21])-zOffset
				NewImgW-=zOffset
				
			Else //For ext. map plots
				Duplicate /O/R=[][][SelPlane] $MapVolW_FName,$ExpImgName_New /WAVE=NewImgW
				redimension /N=(dimsize(NewImgW,0),dimsize(NewImgW,1)) NewImgW //Change from 3D to 2D
				ColorMin=str2num(FitCoefDisplayW[SelIndex][10])
				ColorMax=str2num(FitCoefDisplayW[SelIndex][11])
			Endif
			
			NoteString+="Note: "+SLP_IXPS_ScanListDisplayW[SelRow][2] //Scan note
			Note NewImgW,NoteString
			
			NewImage NewImgW
			String PlotName=S_Name
			String ImgName=StringFromList(0,ImageNameList("",";"))
			ModifyImage /W=$PlotName $ImgName ctab= {ColorMin,ColorMax,rainbow,0}
			ModifyGraph /W=$PlotName margin(Right)=60
			ModifyGraph /W=$PlotName width=360,height=300;DoUpdate;ModifyGraph /W=$PlotName width=0,height=0
			ColorScale /W=$PlotName /E=1/A=RC
			SetAxis /W=$PlotName /A/R left
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_IXPS_ExtCutoff(VolName)
	String VolName	
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	
	String Current_Folder=GetDataFolder(1)
	
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	variable DataRow=SLP_IXPS_FindDataRow(VolName)
	String DataFolder_FName=SLP_IXPS_ScanListW[DataRow][1]
	String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[DataRow][0]
	String ZProfW_FName=ImgVolW_FName+"_zProfl"
	String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
	String FitCoefW_FName=ImgVolW_FName+"_FCoef"
	String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
	String FitCoefDisplaySelW_FName=ImgVolW_FName+"_FCoefDS"
	String FitCoefConstraintsW_FName=ImgVolW_FName+"_FCoefC"
	String FitZProfW_FName=ImgVolW_FName+"_zProflFit"

	Wave ImgVolW=$ImgVolW_FName
	Wave ZProfW=$ZProfW_FName
	Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
	Wave FitCoefDisplaySelW=$FitCoefDisplaySelW_FName
	
	//Create MaskW and FitW (fit result)
	Duplicate /O ZProfW,$ZProfMskW_FName /WAVE=ZProfMskW
	Duplicate /O ZProfW,$FitZProfW_FName /WAVE=FitZProfW
	FitZProfW=NaN
	
	//Create Fit Constraint W (empty)
	Make /O/T/N=0 $FitCoefConstraintsW_FName /WAVE=FitCoefConstraintsW
	
	//Create Coef. wave
	Make /O/D/N=4 $FitCoefW_FName /WAVE=FitCoefW
	
	//Use algorithm to guess the starting values //Guess the coefs.
	wavestats /Q ZProfW
	Variable pk_height=V_max
	Variable pk_offset=V_min
	Variable cutoff_width=str2num(FitCoefDisplayW[3][4])
	Variable cutoff_pos=V_maxloc-cutoff_width/2
	
	//AUTOMATIC mask creation
	//For cut-off fitting - create a step function with 1 from stv_st to peak position of the secondary yield
	ZProfMskW=0;ZProfMskW[0,round(x2pnt(ZProfW,V_maxloc))]=1
	
	FitCoefW[0]={pk_height,pk_offset,cutoff_pos,cutoff_width}
	
	ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
	
	String HoldStr=""
	String Constraint_txt=""
	Variable i=0
	Variable j=0
	Variable m=0
	
	For (i=0;i<4;i+=1)
		HoldStr+=num2str((FitCoefDisplaySelW[i][5]-32)/16)
	EndFor
	
	//Constraints
	For (j=0;j<4;j+=1)
		//LOWER LIMIT
		If (!Stringmatch(FitCoefDisplayW[j][6],"")&&!stringmatch(HoldStr[j],"1"))//If MINIMUM is entered, and parameter not being HELD.
			Constraint_txt="K"+num2str(j)+">="+FitCoefDisplayW[j][6]
			redimension /N=(dimsize(FitCoefConstraintsW,0)+1) FitCoefConstraintsW
			FitCoefConstraintsW[m]=Constraint_txt
			m+=1
		EndIf
		//UPPER LIMIT
		If (!Stringmatch(FitCoefDisplayW[j][7],"")&&!stringmatch(HoldStr[j],"1"))//If MAXIMUM is entered, and parameter not being HELD.
			Constraint_txt="K"+num2str(j)+"<="+FitCoefDisplayW[j][7]
			redimension /N=(dimsize(FitCoefConstraintsW,0)+1) FitCoefConstraintsW
			FitCoefConstraintsW[m]=Constraint_txt
			m+=1
		EndIf
	EndFor
	
	If (V_Value==0)
		FuncFit /W=2/Q/NTHR=0 SLP_ERF FitCoefW  ZProfW /M=ZProfMskW /D=$FitZProfW_FName /C=$FitCoefConstraintsW_FName
	ElseIf (V_Value==1) //Fast mode
		FuncFit /N=1/W=2/Q/NTHR=0 SLP_ERF FitCoefW  ZProfW /M=ZProfMskW /D=$FitZProfW_FName /C=$FitCoefConstraintsW_FName
	Endif
	
	//Put the fit result in col. 3 of FitCoefDisplayW
	FitCoefDisplayW[0,3][3]=num2str(FitCoefW[p])
	
	SetDataFolder $Current_Folder
	
	//return FitCoefW[2] //Return x0 (cut-off position)
End

Function ButtonProc_IXPS_Ext1(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			Variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			ControlInfo /W=SLP_ImgXPS_Panel_01 CheckBox_FastExt
			Variable Fast_Flg=V_Value
			
			//BIN (Remember the last used value)
			Variable Bin=str2num(SLP_IXPS_ScanListW[SelRow][16])
			Prompt Bin,"Binning"
			DoPrompt "Choose binning for the data extraction",Bin //[Todo]: check whether the bin input is integer
			SLP_IXPS_ScanListW[SelRow][16]=num2str(Bin)
			
			//SLP_IXPS_FitInit2(VolName)
			SLP_IXPS_ScanListW[SelRow][34]="1" //Display_Fit_Flag = 0 (display Fit)
			//SLP_IXPS_DisplaySelectedData(VolName)
			If (V_Flag==0) //User clicks 'Continue'
				SVAR Message_Log=root:Package_SLP:ImgXPS:Message_Log
				Message_Log="Extracting ..";DoUpdate
				//SLP_IXPS_CreateCutoffMap(VolName,Bin)
				controlinfo /W=SLP_ImgXPS_Panel_01 Popup_FitType
				//SLP_IXPS_CreateParamMap(VolName,bin,S_Value,LLim,ULim) //[FUNC]SLP_IXPS_CreateParamMap
				SLP_IXPS_CreateParamMap2(VolName,!Fast_Flg)
				
				//Set x-y scale for the newly created map [TODO] Probably need correction here (if user doesn't select any UMap)
				String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
				String UMap1W_FName=ImgVolW_FName+"_UMap1" //UMap=uncorrected map
				Wave UMap1W=$UMap1W_FName
				variable FOV=str2num(SLP_IXPS_ScanListW[SelRow][32])
				variable xMin=str2num(SLP_IXPS_ScanListW[SelRow][28])
				variable xMax=str2num(SLP_IXPS_ScanListW[SelRow][29])
				variable yMin=str2num(SLP_IXPS_ScanListW[SelRow][30])
				variable yMax=str2num(SLP_IXPS_ScanListW[SelRow][31])
				SLP_IXPS_SetXYScale(UMap1W_FName,FOV,xMin,xMax,yMin,yMax,Bin) //[FUNC]SLP_IXPS_SetXYScale
				
				//Update to ScanListW (Binning)
				//SLP_IXPS_ScanListW[SelRow][16]=num2str(Bin) // <- already updated after prompt
				
				//[MODIFIED: 13.02.2021]
				//Set cursor to center for cMap offset.
//				SLP_IXPS_ScanListW[SelRow][57]="0"
//				SLP_IXPS_ScanListW[SelRow][58]="0"
				SLP_IXPS_ScanListW[SelRow][57]=num2str(round((xMax+xMin)/2/Bin))
				SLP_IXPS_ScanListW[SelRow][58]=num2str(round((yMax+yMin)/2/Bin))
				
				Message_Log="Extraction finished"
				SLP_Util_PlayAlert()
			EndIf
			SLP_IXPS_DisplaySelectedData(VolName)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_IXPS_Ext_Old(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			NVAR LLim=root:Package_SLP:ImgXPS:LLim
			NVAR ULim=root:Package_SLP:ImgXPS:ULim
			
			Variable Bin=10
			Prompt Bin,"Binning"
			DoPrompt "Choose binning for the data extraction",Bin
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			Variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			
			//SLP_IXPS_CreateCutoffMap(VolName,Bin)
			controlinfo /W=SLP_ImgXPS_Panel_01 Popup_FitType
			SLP_IXPS_CreateParamMap(VolName,bin,S_Value,LLim,ULim) //[FUNC]SLP_IXPS_CreateParamMap
			
			//Set x-y scale for the newly created map
			String ImgVolW_FName=SLP_IXPS_ScanListW[SelRow][1]+SLP_IXPS_ScanListW[SelRow][0]
			String UMap1W_FName=ImgVolW_FName+"_UMap1" //UMap=uncorrected map
			Wave UMap1W=$UMap1W_FName
			variable FOV=str2num(SLP_IXPS_ScanListW[SelRow][32])
			variable xMin=str2num(SLP_IXPS_ScanListW[SelRow][28])
			variable xMax=str2num(SLP_IXPS_ScanListW[SelRow][29])
			variable yMin=str2num(SLP_IXPS_ScanListW[SelRow][30])
			variable yMax=str2num(SLP_IXPS_ScanListW[SelRow][31])
			SLP_IXPS_SetXYScale(UMap1W_FName,FOV,xMin,xMax,yMin,yMax,Bin) //[FUNC]SLP_IXPS_SetXYScale
			
			//Update to ScanListW (Binning)
			SLP_IXPS_ScanListW[SelRow][16]=num2str(Bin)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SliderProc_IXPS_ImgFrame(sa) : SliderControl
	STRUCT WMSliderAction &sa

	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				
				//Find the current selected row
  				ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
				variable SelRow=V_Value
				Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW	
				//Find the image name (should be the same as ImgVol name) [TODO: proper use = Image name..]
				String CurrentImgeName=SLP_IXPS_ScanListW[SelRow][0]
				
				modifyimage /W=SLP_ImgXPS_Panel_01#IX_ImgW $CurrentImgeName plane=(curval)
					
				SLP_IXPS_ScanListW[SelRow][5]=num2str(curval)
				
				//Draw a line on the z-profile plot
				Variable STV_Pos=str2num(SLP_IXPS_ScanListW[SelRow][11])+Curval*str2num(SLP_IXPS_ScanListW[SelRow][13]) //STV start+Frame number*STV step
				Variable BE_Pos=str2num(SLP_IXPS_ScanListW[SelRow][14])-STV_Pos-str2num(SLP_IXPS_ScanListW[SelRow][15])
				Variable BE_Display_Flg= str2num(SLP_IXPS_ScanListW[SelRow][44])

				setdrawlayer /W=SLP_ImgXPS_Panel_01#IX_FittingWin UserBack
				drawaction /W=SLP_ImgXPS_Panel_01#IX_FittingWin  delete
				SetDrawEnv /W=SLP_ImgXPS_Panel_01#IX_FittingWin xcoord= bottom,ycoord= left,linefgc=(65535,20000,20000 ),dash=2;DelayUpdate
				
				GetAxis /W=SLP_ImgXPS_Panel_01#IX_FittingWin /Q left
				If (!BE_Display_Flg)
					drawline /W=SLP_ImgXPS_Panel_01#IX_FittingWin  STV_Pos,0,STV_Pos,V_Max
				ElseIf (BE_Display_Flg)
					drawline /W=SLP_ImgXPS_Panel_01#IX_FittingWin  BE_Pos,0,BE_Pos,V_Max
				EndIf
				
				SLP_IXPS_ShowEnergy(CurrentImgeName)
				
			endif
			break
	endswitch

	return 0
End

Function SLP_IXPS_ShowEnergy(VolName)
	String VolName
	Variable DataRow=SLP_IXPS_FindDataRow(VolName)
	Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	Variable STV_Start=str2num(SLP_IXPS_ScanListW[DataRow][11])
	Variable STV_Step=str2num(SLP_IXPS_ScanListW[DataRow][13])
	Variable hv=str2num(SLP_IXPS_ScanListW[DataRow][14])
	Variable aWF=str2num(SLP_IXPS_ScanListW[DataRow][15])
	Variable BE_Flg=str2num(SLP_IXPS_ScanListW[DataRow][44])
	Variable DisplayX=0
	String DisplayX_Txt=""
	NVAR FrameNum=root:Package_SLP:ImgXPS:FrameNum
	
	DisplayX=STV_Start+STV_Step*FrameNum
	
	If (!BE_Flg) //KE
		DisplayX_Txt="KE: "+num2str(DisplayX)+"eV"
	Else
		DisplayX_Txt="BE: "+num2str(hv-aWF-DisplayX)+"eV"
	EndIF
	
	TextBox /C/N=X_Display /W=SLP_ImgXPS_Panel_01#IX_ImgW /A=LT/F=0/B=1/G=(65535,65535,0)/X=2.50/Y=1 DisplayX_Txt
	
End

Function SetVarProc_IXPS_CorrectMap1(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			Variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String VolName=SLP_IXPS_ScanListW[SelRow][0]
			NVAR CorrAdj_x1=root:Package_SLP:ImgXPS:CorrAdj_x1
			NVAR CorrAdj_y1=root:Package_SLP:ImgXPS:CorrAdj_y1
			NVAR CorrAdj_mag1=root:Package_SLP:ImgXPS:CorrAdj_mag1
			NVAR CorrAdj_Size1=root:Package_SLP:ImgXPS:CorrAdj_Size1
			NVAR CorrAdj_Rot1=root:Package_SLP:ImgXPS:CorrAdj_Rot1
			
	

 			SLP_IXPS_Correct2(VolName,CorrAdj_x1,CorrAdj_y1,CorrAdj_mag1,CorrAdj_Size1,CorrAdj_Rot1)
			SLP_IXPS_ScanListW[SelRow][35]=num2str(CorrAdj_x1)
			SLP_IXPS_ScanListW[SelRow][36]=num2str(CorrAdj_y1)
			SLP_IXPS_ScanListW[SelRow][37]=num2str(CorrAdj_mag1)
			SLP_IXPS_ScanListW[SelRow][38]=num2str(CorrAdj_Size1)
			SLP_IXPS_ScanListW[SelRow][39]=num2str(CorrAdj_Rot1)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_IXPS_FitLim(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR LLim=root:Package_SLP:ImgXPS:LLim
			NVAR ULim=root:Package_SLP:ImgXPS:ULim
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
			String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
			String ZProfW_FName=ImgVolW_FName+"_zProfl"
			String ZProfMskW_FName=ImgVolW_FName+"_zPMsk"
			Wave ZProfW=$ZProfW_FName
			Wave ZProfMskW=$ZProfMskW_FName
			ZProfMskW=0
			
			If (LLim<dimoffset(ZProfW,0))
				LLim=dimoffset(ZProfW,0)
			Endif
			
			If (ULim>dimoffset(ZProfW,0)+dimdelta(ZProfW,0)*(dimsize(ZprofW,0)-1))
				ULim=dimoffset(ZProfW,0)+dimdelta(ZProfW,0)*(dimsize(ZprofW,0)-1)
			Endif
			
			ZProfMskW[round(x2pnt(ZProfMskW,Llim)),round(x2pnt(ZProfMskW,ULim))]=1
			
			//Update to ScanListW
			SLP_IXPS_ScanListW[SelRow][9]=num2str(LLim)
			SLP_IXPS_ScanListW[SelRow][10]=num2str(ULim)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_IXPS_ImgFrame(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			//Find the current selected row
  				ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
				variable SelRow=V_Value
				Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW	
				//Find the image name (should be the same as ImgVol name) [TODO: proper use = Image name..]
				String CurrentImgeName=SLP_IXPS_ScanListW[SelRow][0]
				
				modifyimage /W=SLP_ImgXPS_Panel_01#IX_ImgW $CurrentImgeName plane=(dval)
				SLP_IXPS_ScanListW[SelRow][5]=num2str(dval)
			break
			
			
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function /T SLP_Util_ExtScanParam([File_FName])
	//DESCRIPTIONs: Extract parameter list and return a string with each line separated by ";"
	//Example when used: print SLP_Util_ExtScanParam(File_FName="experimental_data:ID2734:IXPS01:IXPS01.txt") 
	string File_FName
	
	variable SLP_RefNum
	
	If (ParamIsDefault(File_FName)) //If no file_Fname is given
		//If no filename input
		Open /D/R SLP_RefNum //This shows a dialog but doesn't actually change RefNum
		Open /R SLP_RefNum as S_fileName
		print S_FileName
	Else 
		Open /R SLP_RefNum as File_FName
	Endif
	
	variable i=0 //i= line number
	variable MaxLine=20
	string Line_Str=""
	string ParamListStr=""
	
	For (i=0;i<=MaxLine;i+=1)
		FReadLine SLP_RefNum,Line_Str
		Line_Str=ConvertTextEncoding(Line_Str, 120,1, 1, 0) 
		//[Igor8] - Convert text encoding from iso-8859-1 (output from LEEM2000) to UTF-8
		If (strlen(Line_Str)!=0)
			ParamListStr+=Line_Str[0,strlen(Line_Str)-2]+";"
		Endif
	EndFor
	//print ParamListStr
	Close SLP_RefNum
	
	Return ParamListStr
End





Function SliderProc_IXPS_CScale(sa) : SliderControl
	STRUCT WMSliderAction &sa
	
	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				
				Variable curval = sa.curval
				
				NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
				NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
				SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow 
				
				//Find the current selected row
			  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
				variable SelRow=V_Value
				Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
				String DataFolder_FName=SLP_IXPS_ScanListW[SelRow][1]
				String ImgVolW_FName=DataFolder_FName+SLP_IXPS_ScanListW[SelRow][0]
				String FitCoefDisplayW_FName=ImgVolW_FName+"_FCoefD"
				Wave /T FitCoefDisplayW=$FitCoefDisplayW_FName
				
				Variable SelParamPos=-1
				String SelParamName=""
				Variable SelParamCol=0
				Variable SelParamRow=-1
				
				strswitch(SelSubWindow)	// string switch
					case "SLP_ImgXPS_Panel_01#IX_RawExt1":
						SelParamPos=22
						break	
					case "SLP_ImgXPS_Panel_01#IX_RawExt2":
						SelParamPos=23
						break	
					case "SLP_ImgXPS_Panel_01#IX_RawExt3":
						SelParamPos=24
						break
					case "SLP_ImgXPS_Panel_01#IX_RawExt4":
						SelParamPos=25
						break
					case "SLP_ImgXPS_Panel_01#IX_RawExt5":
						SelParamPos=26
						break
					case "SLP_ImgXPS_Panel_01#IX_RawExt6":		
						SelParamPos=27
						break
					case "SLP_ImgXPS_Panel_01#IX_Correction1":		
						SLP_IXPS_ScanListW[SelRow][18]=num2str(ColorMin)
						SLP_IXPS_ScanListW[SelRow][19]=num2str(ColorMax)
						break
					case "SLP_ImgXPS_Panel_01#IX_ResultMap1":		
						SLP_IXPS_ScanListW[SelRow][20]=num2str(ColorMin)
						SLP_IXPS_ScanListW[SelRow][21]=num2str(ColorMax)
						break
				endswitch
				
				If (SelParamPos!=-1)
					SelParamName=SLP_IXPS_ScanListW[SelRow][SelParamPos]
					FindValue /S=(dimsize(FitCoefDisplayW,0)*2) /TEXT=SelParamName/TXOP=4 /Z FitCoefDisplayW
					SelParamCol=floor(V_value/dimsize(FitCoefDisplayW,0))
					SelParamRow=V_value-SelParamCol*dimsize(FitCoefDisplayW,0)
					FitCoefDisplayW[SelParamRow][10]=num2str(ColorMin)
					FitCoefDisplayW[SelParamRow][11]=num2str(ColorMax)
				EndIf
				
				string ImageName=stringfromlist(0,ImageNameList(SelSubWindow, ";" ))
				ModifyImage /W=$SelSubWindow $ImageName ctab= {ColorMin,ColorMax,,0}
			EndIf
			break
	endswitch

	return 0
End

Function SLP_Util_LegendFromList(GraphName,TraceStringList)
	//Add another legend with label from TraceStringList instead of trace name
	//Graph name can be "" for top graph
	String GraphName,TraceStringList
	
	String TraceList=TraceNameList(GraphName, ";", 1 )
	String TraceName=""
	Variable i=0
	String LegendText=""
	
	For (i=0;i<itemsinlist(TraceStringList,";");i+=1)
		TraceName=StringFromList(i,TraceList,";")
		LegendText+="\\s("+TraceName+") "+StringFromList(i,TraceStringList,";")+"\r"	
	EndFor
	LegendText=RemoveEnding(LegendText) //Remove the last '\r'
	Legend /W=$GraphName/A=LT/N=SLPALegend LegendText
End

Function SLP_Util_AddnRmTraces(SLP_GraphName,NewWFNameList,Option)
	String SLP_GraphName,NewWFNameList //NameList must use ";" to separate WName
	Variable Option
	 //0=Remove all existing trace(s) and add a new one,
	 //1=For images instead of traces
	 //2=Plot y_wave vs x_wave (in pair)
	
	string TraceName=""
	string TraceName_X=""
	string TraceName_Y=""
	string TraceList=""
	variable i=0
	
	If (Option==0)
		TraceList=TraceNameList(SLP_GraphName,";",1)
		For (i=0;i<itemsinlist(NewWFNameList,";");i+=1)
			TraceName=stringFromList(i,NewWFNameList,";")
			Appendtograph /W=$SLP_GraphName $TraceName
		EndFor
		For (i=0;i<itemsinlist(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveFromGraph /W=$SLP_GraphName $TraceName
		EndFor
	Elseif (Option==1)
		TraceList=ImageNameList(SLP_GraphName,";")
		For (i=0;i<itemsinlist(NewWFNameList,";");i+=1)
			TraceName=stringFromList(i,NewWFNameList,";")
			AppendImage /W=$SLP_GraphName /G=1 $TraceName
		EndFor
		For (i=0;i<itemsinlist(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveImage /W=$SLP_GraphName $TraceName
		EndFor
	ElseIf (Option==2)
		TraceList=TraceNameList(SLP_GraphName,";",1)
		For (i=0;i<itemsinlist(NewWFNameList,";");i+=2)
			TraceName_X=stringFromList(i,NewWFNameList,";")
			TraceName_Y=stringFromList(i+1,NewWFNameList,";")
			Appendtograph /W=$SLP_GraphName $TraceName_Y vs $TraceName_X
		EndFor
		For (i=0;i<itemsinlist(TraceList,";");i+=1)
			TraceName=stringFromList(i,TraceList,";")
			RemoveFromGraph /W=$SLP_GraphName $TraceName
		EndFor
	EndIf
End
	

Function SLP_IXPS_FindDataRow(VolName)
	String VolName
	wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_IXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_IXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_IXPS_ScanListW,0)
	
	Return DataRow
End


Function SLP_Util_Init()
	//DESCRIPTIONs - initialize Util global variables/waves
	//MODIFIED: 18.03.2021
	string Current_folder=getdatafolder(1)
	NewDataFolder /O root:Package_SLP
	NewDataFolder /O root:Package_SLP:Util
	NewDataFolder /O root:Package_SLP:Util:FindElement
	NewDataFolder /O root:Package_SLP:Util:FindAuger
	NewDataFolder /O root:Package_SLP:Util:WNameSuggest
	NewDataFolder /O root:Package_SLP:Util:AutoUpdateFileList
	NewDataFolder /O root:Package_SLP:Util:CScale
	NewDataFolder /O root:Package_SLP:Util:ObjStv
	
	SetDataFolder root:Package_SLP:Util
	variable /G Launcher_expand
	variable /G NewZ
	
	SetDataFolder root:Package_SLP:Util:FindElement
	make /T/O/N=(0,4) SLP_ResultElements_textW
	
	SetDataFolder root:Package_SLP:Util:FindAuger
	make /T/O/N=(0,4) SLP_ResultAuger_textW

	SetDataFolder root:Package_SLP:Util:WNameSuggest
	string /G WNameSuggestion=""
	
	SetDataFolder root:Package_SLP:Util:AutoUpdateFileList
	make /O/T/N=(0,8) root:Package_SLP:Util:AutoUpdateFileList:W_FileList /WAVE=W_FolderList
	make /O/N=(0,8) root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel /WAVE=W_FolderList_Sel
	make /O/N=(150,150) root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg
	string /G ImgLocation
	string /G imgExtension=".dat"
	variable /G ImgLoadPreview=1 //[MODIFIED: 18.03.2021] - changed from 0 to 1
	variable /G ImgSel=0
		
	SetDataFolder root:Package_SLP:Util:CScale
	Variable /G SetValue_Min
	Variable /G SetValue_Max
	variable /G MinValue
	variable /G MaxValue
	variable /G Rev_Flg=0
	string /G ColorTable="rainbow"
	variable /G SetValueMin_Default
	variable /G SetValueMax_Default
	variable /G Rev_Flg_Default=0
	
	SetDataFolder root:Package_SLP:Util:ObjStv
	Make /T/O/N=(128,2) SLP_ObjStv_W
	setDimLabel 1,0,OBJ,SLP_ObjStv_W
	setDimLabel 1,0,STV,SLP_ObjStv_W
	Make /O/N=(128,2) SLP_ObjStv_SelW
	Make /O/N=128 OBJ_W
	Make /O/N=128 STV_W
	Make /O/N=128 ObjFit_W
	ObjFit_W=NaN
	SLP_ObjStv_W=""
	SLP_ObjStv_SelW=2
	setdatafolder $Current_folder
End

Function SLP_Util_FolderTotalSizeMBytes(FolderName,Print_Flg)
	//CREATED: 09.02.2021
	//DESCRIPTIONs: Calculate folder size (all waves combined) including wave in subfolders.
	String FolderName //Full path of a folder to check **Without ":" at the end
	Variable Print_Flg //Show size of each subfolders
	
	String List_FoldersInFolder=""
	String CurrentFolder=GetDataFolder(1)
	
	SetDataFolder $(FolderName+":")
	List_FoldersInFolder=StringByKey("FOLDERS",DataFolderDir(1),":")
	
	String SubFolder_FName=""
	
	Variable i=0
	Variable TotalSize=SLP_Util_FolderWaveSizeMBytes(FolderName,0) 
	If (Print_Flg)
		Print "Waves in "+FolderName+": "+num2str(TotalSize)+" MBytes" //Show combined size of all waves in the specified folder.
	EndIf
	Variable SubFolderSize=0
	
	For (i=0;i<itemsinlist(List_FoldersInFolder,",");i+=1)
		SubFolder_FName=FolderName+":"+StringFromList(i,List_FoldersInFolder,",")
		//TotalSize+=SLP_Util_FolderWaveSizeMBytes(SubFolder_FName,0) //All waves in this Subfolder
		SubFolderSize=SLP_Util_FolderTotalSizeMBytes(SubFolder_FName,0) //Recursive - look inside the subfolder
		TotalSize+=SubFolderSize
		If (Print_Flg)
			Print SubFolder_FName+": "+num2str(SubFolderSize)+" MBytes"
		EndIf
	EndFor
	
	SetDataFolder $CurrentFolder
	If (Print_Flg)
		Print "Total size = "+num2str(TotalSize)+" MBytes"
	EndIf
	Return TotalSize
End


Function SLP_Util_FolderWaveSizeMBytes(FolderName,Print_Flg)
	//CREATED: 09.02.2021
	//DESCRIPTIONs: Return the total size of all waves in a folder in MBytes (not including waves in subfolders)
	String FolderName //Full path of a folder **Without ":" at the end
	Variable Print_Flg //Flag to print out results
	
	String List_WavesInFolder=""
	String CurrentFolder=GetDataFolder(1)
	setdatafolder $(FolderName+":")
	
	List_WavesInFolder=StringByKey("WAVES",DataFolderDir(2),":")
		
	Variable i=0
	String Name_Wave
	String Info_Wave
	Variable Size_Wave
	Variable Size_Sum=0
	
	For (i=0;i<itemsinlist(List_WavesInFolder,",");i+=1)
		Name_Wave=StringFromList(i,List_WavesInFolder,",")
		Info_Wave=WaveInfo($Name_Wave,0)
		Size_Wave=str2num(StringByKey("SIZEINBYTES",Info_Wave,":"))/10^6 //Size in MBytes
		If (Print_Flg)
			Print Name_Wave+" Size = "+num2str(Size_Wave)+" MBytes"
		EndIF
		Size_Sum+=Size_Wave
	EndFor
	If (Print_Flg)
		Print "Total size = "+num2str(Size_Sum)+" MBytes"
	EndIF
	SetDataFolder $CurrentFolder
	Return Size_SUM
End

Function SLP_Util_ROI_Init()
	String Current_folder=getdatafolder(1)
	if (!DataFolderExists("root:Package_SLP:Util:ROI"))
		NewDataFolder/S root:Package_SLP:Util:ROI
		SetDatafolder root:Package_SLP:Util:ROI
		
		//Add init. variables/waves here
		String /G SelectedWaveFName
		Variable /G Default_Threshold=1700
		Variable /G Default_SubArea1Threshold=1700
		Variable /G Default_SubArea2Threshold=1700
		String /G ResultW_Name="ROI_W"
		String /G InvResultW_Name="InvROI_W"
		
		Variable /G DefThresholdFullScrn_Min
		Variable /G DefThresholdFullScrn_Max
		Variable /G DefThresholdSubArea1_Min
		Variable /G DefThresholdSubArea1_Max
		Variable /G DefThresholdSubArea2_Min
		Variable /G DefThresholdSubArea2_Max
		
		SetDatafolder $Current_Folder
	endif
End

Function /S SLP_Util_ROI_LoadWavePrompt()
	SVAR SelectedWaveFName=root:Package_SLP:Util:ROI:SelectedWaveFName
	Execute "CreateBrowser prompt=\"Select data wave\", showWaves=1, showVars=0, showStrs=0" 
	//Old style. in Igor7 no need to use Execute
	SVAR S_BrowserList=S_BrowserList
	NVAR V_Flag=V_Flag
	
	if(V_Flag!=0)
		//Add data wave
		SelectedWaveFName=stringfromlist(0,S_BrowserList)
	EndIf
	Return SelectedWaveFName
End

Function SLP_Util_ROI_LoadWave(WaveFName)
	String WaveFName
	
	NVAR Default_Threshold=root:Package_SLP:Util:ROI:Default_Threshold
	NVAR Default_SubArea1Threshold=root:Package_SLP:Util:ROI:Default_SubArea1Threshold
	NVAR Default_SubArea2Threshold=root:Package_SLP:Util:ROI:Default_SubArea2Threshold
	
	Duplicate /O $WaveFName, root:Package_SLP:Util:ROI:ROISourceW /Wave=ROISourceW
	ImageStats /Q ROISourceW
	Variable MaxInt=V_Max
	Variable MinInt=V_Min
	Slider slider_ThresholdFullScrn limits={MinInt,MaxInt,1},Win=SLP_UTIL_ROICreate
	Slider slider_ImgThresholdSubArea1 limits={MinInt,MaxInt,1},Win=SLP_UTIL_ROICreate
	Slider slider_ImgThresholdSubArea2 limits={MinInt,MaxInt,1},Win=SLP_UTIL_ROICreate
	
	//Create threshold image
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SourceWBkup /Wave=ROIW_SourceWBkup
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_ImgTh /Wave=ROIW_ImgTh
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_Scrn /Wave=ROIW_Scrn
	Redimension /B/U ROIW_Scrn //Convert to unsigned byte (8bit)
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_FullScrnTh /Wave=ROIW_FullScrnTh
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SubArea1 /Wave=ROIW_SubArea1
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SubROI1 /Wave=ROIW_SubROI1
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SubImg1 /Wave=ROIW_SubImg1
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SubArea2 /Wave=ROIW_SubArea2
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SubROI2 /Wave=ROIW_SubROI2
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_SubImg2 /Wave=ROIW_SubImg2
	
	Duplicate /O ROISourceW,root:Package_SLP:Util:ROI:ROIW_ResultROI /Wave=ROIW_ResultROI
	
	ImageThreshold/Q/O/I/T=(Default_Threshold) ROIW_ImgTh
	
	If (Exists("root:Package_SLP:Util:ROI:ROIW_DefaultScrn"))
		Wave ROIW_DefaultScrn=root:Package_SLP:Util:ROI:ROIW_DefaultScrn
		ROIW_Scrn=ROIW_DefaultScrn
	Else
		ROIW_Scrn=0
	EndIf
	
	If (Exists("root:Package_SLP:Util:ROI:ROIW_DefaultSubArea1"))
		Wave ROIW_DefaultSubArea1=root:Package_SLP:Util:ROI:ROIW_DefaultSubArea1
		ROIW_SubArea1=ROIW_DefaultSubArea1
		ROIW_SubImg1*=ROIW_SubArea1
		ImageThreshold/Q/I/T=(Default_SubArea1Threshold) ROIW_SubArea1
		Wave M_ImageThresh
		ROIW_SubROI1=M_ImageThresh
	Else
		ROIW_SubArea1=0
		ROIW_SubROI1=0
	EndIf
	
	If (Exists("root:Package_SLP:Util:ROI:ROIW_DefaultSubArea2"))
		Wave ROIW_DefaultSubArea2=root:Package_SLP:Util:ROI:ROIW_DefaultSubArea2
		ROIW_SubArea2=ROIW_DefaultSubArea2
		ROIW_SubImg2*=ROIW_SubArea2
		ImageThreshold/Q/I/T=(Default_SubArea2Threshold) ROIW_SubArea2
		Wave M_ImageThresh
		ROIW_SubROI2=M_ImageThresh
	Else
		ROIW_SubArea2=0
		ROIW_SubROI2=0
	EndIf
	
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#SourceImg","root:Package_SLP:Util:ROI:ROISourceW",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#ScreenROI","root:Package_SLP:Util:ROI:ROIW_Scrn",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#FullROI","root:Package_SLP:Util:ROI:ROIW_ImgTh",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#SubArea1","root:Package_SLP:Util:ROI:ROIW_SubImg1",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#SubROI1","root:Package_SLP:Util:ROI:ROIW_SubROI1",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#SubArea2","root:Package_SLP:Util:ROI:ROIW_SubImg2",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#SubROI2","root:Package_SLP:Util:ROI:ROIW_SubROI2",1)
	SLP_Util_AddnRmTraces("SLP_UTIL_ROICreate#ResultImg","root:Package_SLP:Util:ROI:ROIW_ResultROI",1)
End

Function SLP_Util_ROI_DrawScreen()
	SetActiveSubwindow SLP_UTIL_ROICreate#SourceImg
	DrawAction delete
	SetDrawEnv fillpat= 0,linefgc=(65535,0,0)
	showtools /A oval
	SetDrawLayer ProgFront
	TitleBox title_ScrnMskDraw title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {15,577},frame=0
End	

Function ButtonProc_Util_ROI(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			strswitch(ba.CtrlName)	// string switch
				case "button_LoadImgW":
					SLP_Util_ROI_LoadWave(SLP_Util_ROI_LoadWavePrompt())
					break
				case "button_DrawScreen":
					SetActiveSubwindow SLP_UTIL_ROICreate#SourceImg
					DrawAction delete
					SetDrawEnv fillpat= 0,linefgc=(65535,0,0)
					showtools /A oval
					SetDrawLayer ProgFront
					TitleBox title_ScrnMskDraw title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {15,577},frame=0
					break
				case "button_DrawSubArea1":
					SetActiveSubwindow SLP_UTIL_ROICreate#FullROI
					SetAxis /A
					DrawAction delete
					SetDrawEnv fillpat= 0,linefgc=(0,65535,0)
					showtools /A oval
					SetDrawLayer ProgFront
					TitleBox title_ScrnMskDraw title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {15,577},frame=0
					break
				case "button_DrawSubArea2":
					SetActiveSubwindow SLP_UTIL_ROICreate#SubROI1
					SetAxis /A
					DrawAction delete
					SetDrawEnv fillpat= 0,linefgc=(0,0,65535)
					showtools /A oval
					SetDrawLayer ProgFront
					TitleBox title_ScrnMskDraw title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'",disable=2,pos= {15,577},frame=0
					break
				case "button_CreateScrn":
					TitleBox title_ScrnMskDraw disable=1
					ImageGenerateROIMask /W=SLP_UTIL_ROICreate#SourceImg /E=0 /I=1 ROISourceW
					Wave M_ROIMask
					Wave ROIW_Scrn=root:Package_SLP:Util:ROI:ROIW_Scrn
					ROIW_Scrn=M_ROIMask
					break
				case "button_CreateSubarea1":
					TitleBox title_ScrnMskDraw disable=1
					ImageGenerateROIMask /W=SLP_UTIL_ROICreate#FullROI /E=0 /I=1 ROIW_ImgTh
					Wave M_ROIMask
					Wave ROIW_SubArea1=root:Package_SLP:Util:ROI:ROIW_SubArea1
					Wave ROIW_SubImg1=root:Package_SLP:Util:ROI:ROIW_SubImg1
					Wave ROISourceW=root:Package_SLP:Util:ROI:ROISourceW
					ROIW_SubArea1=M_ROIMask
					ROIW_SubImg1=M_ROIMask*ROISourceW
					break
				case "button_CreateSubarea2":
					TitleBox title_ScrnMskDraw disable=1
					ImageGenerateROIMask /W=SLP_UTIL_ROICreate#SubROI1 /E=0 /I=1 ROIW_SubROI1
					Wave M_ROIMask
					Wave ROIW_SubArea2=root:Package_SLP:Util:ROI:ROIW_SubArea2
					Wave ROIW_SubImg2=root:Package_SLP:Util:ROI:ROIW_SubImg2
					Wave ROISourceW=root:Package_SLP:Util:ROI:ROISourceW
					ROIW_SubArea2=M_ROIMask
					ROIW_SubImg2=M_ROIMask*ROISourceW
					break	
				case "button_SaveScreen":
					Duplicate /O root:Package_SLP:Util:ROI:ROIW_Scrn,root:Package_SLP:Util:ROI:ROIW_DefaultScrn
					break
				
				case "button_SaveSubArea1":
					Duplicate /O root:Package_SLP:Util:ROI:ROIW_SubArea1,root:Package_SLP:Util:ROI:ROIW_DefaultSubArea1
					break
				case "button_SaveSubArea2":
					Duplicate /O root:Package_SLP:Util:ROI:ROIW_SubArea2,root:Package_SLP:Util:ROI:ROIW_DefaultSubArea2
					break
				case "button_SaveROIW":
					SVAR  ResultW_Name=root:Package_SLP:Util:ROI:ResultW_Name
					Duplicate /O root:Package_SLP:Util:ROI:ROIW_ResultROI,$ResultW_Name /WAVE=ResultW
					NewImage ResultW
					break
				case "button_SaveInvROIW":
					SVAR  InvResultW_Name=root:Package_SLP:Util:ROI:InvResultW_Name
					Wave ROIW_ResultROI=root:Package_SLP:Util:ROI:ROIW_ResultROI
					Wave ROIW_Scrn=root:Package_SLP:Util:ROI:ROIW_Scrn
					Duplicate /O ROIW_ResultROI,$InvResultW_Name /WAVE=InvResultW
					InvResultW=!ROIW_ResultROI&&ROIW_Scrn
					NewImage InvResultW
					break
				case "button_ResetZoom":
					SetAxis /A/W=SLP_Util_ROICreate#SourceImg
					SetAxis /A/W=SLP_Util_ROICreate#ResultImg
					break
				case "button_Done":
					DoWindow /K SLP_Util_ROICreate
					break
				case "button_RemoveBG":
					Wave ROISourceW=root:Package_SLP:Util:ROI:ROISourceW
					Wave ROIW_Scrn=root:Package_SLP:Util:ROI:ROIW_Scrn
					//Redimension /B/U ROIW_Scrn //Convert to unsigned byte (8bit)
					ImageRemoveBackground /O/R=ROIW_Scrn  ROISourceW
					//Redimension /R ROIW_Scrn 
					break
				case "button_Revert":
					Wave ROISourceW=root:Package_SLP:Util:ROI:ROISourceW
					Wave ROIW_SourceWBkup=root:Package_SLP:Util:ROI:ROIW_SourceWBkup
					ROISourceW=ROIW_SourceWBkup
					break
				case "button_DefaultSlider":
					NVAR DefThresholdFullScrn_Min=root:Package_SLP:Util:ROI:DefThresholdFullScrn_Min
					NVAR DefThresholdFullScrn_Max=root:Package_SLP:Util:ROI:DefThresholdFullScrn_Max
					NVAR DefThresholdSubArea1_Min=root:Package_SLP:Util:ROI:DefThresholdSubArea1_Min
					NVAR DefThresholdSubArea1_Max=root:Package_SLP:Util:ROI:DefThresholdSubArea1_Max
					NVAR DefThresholdSubArea2_Min=root:Package_SLP:Util:ROI:DefThresholdSubArea2_Min
					NVAR DefThresholdSubArea2_Max=root:Package_SLP:Util:ROI:DefThresholdSubArea2_Max
					Slider slider_ThresholdFullScrn limits={DefThresholdFullScrn_Min,DefThresholdFullScrn_Max,1},Win=SLP_UTIL_ROICreate
					Slider slider_ImgThresholdSubArea1 limits={DefThresholdSubArea1_Min,DefThresholdSubArea1_Max,1},Win=SLP_UTIL_ROICreate
					Slider slider_ImgThresholdSubArea2 limits={DefThresholdSubArea2_Min,DefThresholdSubArea2_Max,1},Win=SLP_UTIL_ROICreate
					break
				case "button_SliderAdj":
					Wave ROISourceW=root:Package_SLP:Util:ROI:ROISourceW
					ImageStats /Q ROISourceW
					Variable ThresholdFullScrn_Min=V_Min
					Variable ThresholdFullScrn_Max=V_Max
					Variable ThresholdSubArea1_Min=V_Min
					Variable ThresholdSubArea1_Max=V_Max
					Variable ThresholdSubArea2_Min=V_Min
					Variable ThresholdSubArea2_Max=V_Max
					String SaveToDefault_flg="No"
					
					Prompt ThresholdFullScrn_Min,"Full screen min intensity"
					Prompt ThresholdFullScrn_Max,"Full screen max intensity"
					Prompt ThresholdSubArea1_Min,"SubArea1 min intensity"
					Prompt ThresholdSubArea1_Max,"SubArea1 max intensity"
					Prompt ThresholdSubArea2_Min,"SubArea2 min intensity"
					Prompt ThresholdSubArea2_Max,"SubArea2 max intensity"
					Prompt SaveToDefault_flg, "Save value as default?", popup "Yes;No"
					DoPrompt "Enter new ranges",ThresholdFullScrn_Min,ThresholdFullScrn_Max,ThresholdSubArea1_Min,ThresholdSubArea1_Max,ThresholdSubArea2_Min,ThresholdSubArea2_Max,SaveToDefault_flg
					
					If (V_Flag==0) //User clicks Continue
						Slider slider_ThresholdFullScrn limits={ThresholdFullScrn_Min,ThresholdFullScrn_Max,1},Win=SLP_UTIL_ROICreate
						Slider slider_ImgThresholdSubArea1 limits={ThresholdSubArea1_Min,ThresholdSubArea1_Max,1},Win=SLP_UTIL_ROICreate
						Slider slider_ImgThresholdSubArea2 limits={ThresholdSubArea2_Min,ThresholdSubArea2_Max,1},Win=SLP_UTIL_ROICreate
						If (Stringmatch(SaveToDefault_flg,"Yes"))
							NVAR DefThresholdFullScrn_Min=root:Package_SLP:Util:ROI:DefThresholdFullScrn_Min
							NVAR DefThresholdFullScrn_Max=root:Package_SLP:Util:ROI:DefThresholdFullScrn_Max
							NVAR DefThresholdSubArea1_Min=root:Package_SLP:Util:ROI:DefThresholdSubArea1_Min
							NVAR DefThresholdSubArea1_Max=root:Package_SLP:Util:ROI:DefThresholdSubArea1_Max
							NVAR DefThresholdSubArea2_Min=root:Package_SLP:Util:ROI:DefThresholdSubArea2_Min
							NVAR DefThresholdSubArea2_Max=root:Package_SLP:Util:ROI:DefThresholdSubArea2_Max
							DefThresholdFullScrn_Min=ThresholdFullScrn_Min
							DefThresholdFullScrn_Max=ThresholdFullScrn_Max
							DefThresholdSubArea1_Min=ThresholdSubArea1_Min
							DefThresholdSubArea1_Max=ThresholdSubArea1_Max
							DefThresholdSubArea2_Min=ThresholdSubArea2_Min
							DefThresholdSubArea2_Max=ThresholdSubArea2_Max
						EndIf
					EndIf
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function SliderProc_Util_ROI(sa) : SliderControl
	STRUCT WMSliderAction &sa
	NVAR Default_Threshold=root:Package_SLP:Util:ROI:Default_Threshold
	NVAR Default_SubArea1Threshold=root:Package_SLP:Util:ROI:Default_SubArea1Threshold
	NVAR Default_SubArea2Threshold=root:Package_SLP:Util:ROI:Default_SubArea2Threshold
	Wave ROISourceW=root:Package_SLP:Util:ROI:ROISourceW
	Wave ROIW_ImgTh=root:Package_SLP:Util:ROI:ROIW_ImgTh
	Wave ROIW_Scrn=root:Package_SLP:Util:ROI:ROIW_Scrn
	Wave ROIW_SubImg1=root:Package_SLP:Util:ROI:ROIW_SubImg1
	Wave ROIW_SubROI1=root:Package_SLP:Util:ROI:ROIW_SubROI1
	Wave ROIW_SubArea1=root:Package_SLP:Util:ROI:ROIW_SubArea1
	Wave ROIW_SubImg2=root:Package_SLP:Util:ROI:ROIW_SubImg2
	Wave ROIW_SubROI2=root:Package_SLP:Util:ROI:ROIW_SubROI2
	Wave ROIW_SubArea2=root:Package_SLP:Util:ROI:ROIW_SubArea2
	Wave ROIW_ResultROI=root:Package_SLP:Util:ROI:ROIW_ResultROI
	
	switch( sa.eventCode )
		case -1: // control being killed
			break
		default:
			if( sa.eventCode & 1 ) // value set
				Variable curval = sa.curval
				
				strswitch(sa.CtrlName)	// string switch
					case "slider_ThresholdFullScrn":
						Default_Threshold=curval
						ImageThreshold/Q/I/T=(Default_Threshold) ROISourceW
						Wave M_ImageThresh
						ROIW_ImgTh=M_ImageThresh
						ROIW_ResultROI=((ROIW_ImgTh&&!ROIW_SubArea1)||ROIW_SubROI1)&&ROIW_Scrn
						break
					case "slider_ImgThresholdSubArea1":
						Default_SubArea1Threshold=curval
						ImageThreshold/Q/I/T=(Default_SubArea1Threshold) ROIW_SubImg1
						Wave M_ImageThresh
						ROIW_SubROI1=M_ImageThresh
						ROIW_ResultROI=((ROIW_ImgTh&&!ROIW_SubArea1)||ROIW_SubROI1)&&ROIW_Scrn
						break
					case "slider_ImgThresholdSubArea2":
						Default_SubArea2Threshold=curval
						ImageThreshold/Q/I/T=(Default_SubArea2Threshold) ROIW_SubImg2
						Wave M_ImageThresh
						ROIW_SubROI2=M_ImageThresh
						ROIW_ResultROI=(((ROIW_ImgTh&&!ROIW_SubArea1)||ROIW_SubROI1)&&!ROIW_SubArea2)||ROIW_SubROI2&&ROIW_Scrn
						break
				EndSwitch
			endif
			break
	endswitch

	return 0
End

Function Panel_UTIL_ROICreate() : Panel
	
	SLP_Util_ROI_Init() //create Folder and initial values for global variables if not exists.
	
	Variable Block1x=10
	Variable Block1y=28
	Variable MainImgSize=260
	Variable Block2x=290
	Variable Block2y=20
	Variable Block2ySep=40
	Variable SmallImgSize=155
	Variable Block3x=465
	Variable Block3y=20
	Variable Block3ySep=40

	PauseUpdate; Silent 1		// building window...
	DoWindow /K SLP_Util_ROICreate
	NewPanel /N=SLP_Util_ROICreate /W=(120,44,850,680)
	SetDrawLayer UserBack
	SetDrawEnv fsize= 18
	DrawText 14,26,"SLPA ROI Creation"
	SetDrawLayer UserBack; SetDrawEnv fsize= 14
	DrawText Block2x,252,"Sub-area"
	
	//BLOCK1 - Load buttons and main images
	Button button_LoadImgW,pos={Block1x,Block1y},size={150,16},title="Load from image wave",fSize=10,proc=ButtonProc_Util_ROI
	//Button button_LoadImgFile,pos={Block1x,Block1y+19},size={150,16},title="Load from image file",fSize=10
	Button button_ResetZoom,pos={Block1x+173,Block1y+19},size={80,16},proc=ButtonProc_Util_ROI,title="Reset zoom",fSize=10
	Button button_RemoveBG,pos={Block1x,46},size={115,16},proc=ButtonProc_Util_ROI,title="Remove background",fSize=10
	Button button_Revert,pos={Block1x+120,46},size={50,16},proc=ButtonProc_Util_ROI,title="Revert",fSize=10
	
	SetVariable setvar_SelectedWFName,pos={181,2},size={250,15},title="Source image wave:"
	SetVariable setvar_SelectedWFName,value= root:Package_SLP:Util:ROI:SelectedWaveFName
	
	Display/W=(Block1x,63,Block1x+MainImgSize,63+MainImgSize)/HOST=SLP_Util_ROICreate /N=SourceImg
	AppendImage/G=1 :Package_SLP:Util:ROI:ROISourceW
	modifygraph nolabel=1,tick=0,mirror=1
	TextBox/C/N=text0/F=0/A=LT/B=1 "\\Z12\\K(61166,61166,61166)Source image"
	ModifyImage ROISourceW ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3
	ModifyGraph mirror=2
	
	Display/W=(Block1x,315,Block1x+MainImgSize,315+MainImgSize)/HOST=SLP_Util_ROICreate /N=ResultImg
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_ResultROI
	modifygraph nolabel=1,tick=0,mirror=1
	TextBox/C/N=text0/F=0/A=LT/B=1 "\\Z12\\K(61166,61166,61166)Result ROI"
	ModifyImage ROIW_ResultROI ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3
	ModifyGraph mirror=2
	
	//BLOCK2 
	
	Button button_SaveScreen,pos={Block2x,Block2y},size={140,16},proc=ButtonProc_Util_ROI,title="Save screen as default",fSize=10
	Button button_DrawScreen,pos={Block2x,Block2y+18},size={80,16},proc=ButtonProc_Util_ROI,title="Draw screen",fSize=10,fColor=(65535,0,0)
	Button button_CreateScrn,pos={Block2x+85,Block2y+18},size={80,16},proc=ButtonProc_Util_ROI,title="Create ROI",fSize=10
	
	Display/W=(Block2x,Block2y+40,Block2x+SmallImgSize,Block2y+40+SmallImgSize)/HOST=SLP_Util_ROICreate /N=ScreenROI
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_Scrn
	modifygraph nolabel=1,tick=0,mirror=1
	TextBox/C/N=text0/F=0/A=LT/B=1 "\\Z10\\K(60000,0,0)Screen"
	ModifyImage ROIW_Scrn ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3,mirror=2
	
	Display/W=(Block2x,Block2y+40+SmallImgSize+Block2ySep,Block2x+SmallImgSize,Block2y+40+SmallImgSize+Block2ySep+SmallImgSize)/HOST=SLP_Util_ROICreate /N=SubArea1
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_SubImg1
	modifygraph nolabel=1,tick=0,mirror=1
	TextBox/C/N=text0/F=0/A=LT/B=1 "\\Z10\\K(0,45000,0)Sub-area1"
	ModifyImage ROIW_SubImg1 ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3,mirror=2
	
	Display/W=(Block2x,Block2y+40+2*(SmallImgSize+Block2ySep)-30,Block2x+SmallImgSize,Block2y+40+2*(SmallImgSize+Block2ySep)+SmallImgSize-30)/HOST=SLP_Util_ROICreate /N=SubArea2
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_SubImg2
	modifygraph nolabel=1,tick=0,mirror=1
	TextBox/C/N=text0/F=0/A=LT/B=1 "\\Z10\\K(0,0,45000)Sub-area2"
	ModifyImage ROIW_SubImg2 ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3,mirror=2
	
	//BLOCK3
	Button button_SaveSubArea1,pos={Block3x,Block3y},size={140,16},proc=ButtonProc_Util_ROI,title="Save SubArea1",fSize=10
	Button button_DrawSubArea1,pos={Block3x,Block3y+18},size={90,16},proc=ButtonProc_Util_ROI,title="Draw subarea1",fSize=10,fColor=(16386,65535,16385)
	Button button_CreateSubarea1,pos={Block3x+90,Block3y+18},size={70,16},proc=ButtonProc_Util_ROI,title="Create ROI",fSize=10

	Button button_SaveSubArea2,pos={Block3x,Block3y+SmallImgSize+Block3ySep+5},size={140,16},proc=ButtonProc_Util_ROI,title="Save SubArea2",fSize=10
	Button button_DrawSubArea2,pos={Block3x,Block3y+SmallImgSize+Block3ySep+22},size={90,16},proc=ButtonProc_Util_ROI,title="Draw subarea2",fSize=10,fColor=(16385,49025,65535)
	Button button_CreateSubarea2,pos={Block3x+90,Block3y+SmallImgSize+Block3ySep+22},size={70,16},proc=ButtonProc_Util_ROI,title="Create ROI",fSize=10

	Display/W=(Block3x,Block3y+40,Block3x+SmallImgSize,Block3y+40+SmallImgSize)/HOST=SLP_Util_ROICreate /N=FullROI
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_ImgTh
	modifygraph nolabel=1,tick=0,mirror=1
	ModifyImage ROIW_ImgTh ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3
	ModifyGraph tick=3
	ModifyGraph mirror=2
	ModifyGraph noLabel=2
	ModifyGraph lblMargin(left)=58
	ModifyGraph lblLatPos(left)=-49
	SetDrawLayer ProgFront
	SetDrawEnv linefgc= (0,65535,0),fillpat= 0
	DrawOval 0.266666666666667,0.315789473684211,0.733333333333333,0.699248120300752
	
	Display/W=(Block3x,Block3y+40+SmallImgSize+Block3ySep,Block3x+SmallImgSize,Block3y+40+SmallImgSize+Block3ySep+SmallImgSize)/HOST=SLP_Util_ROICreate /N=SubROI1
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_SubROI1
	modifygraph nolabel=1,tick=0,mirror=1
	ModifyImage ROIW_SubROI1 ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3
	ModifyGraph mirror=2
	SetDrawLayer ProgFront
	SetDrawEnv linefgc= (0,0,65535),fillpat= 0
	DrawOval 0.342281879194631,0.395522388059701,0.644295302013423,0.634328358208955
	
	Display/W=(Block3x,Block3y+40+2*(SmallImgSize+Block3ySep)-30,Block3x+SmallImgSize,Block3y+40+2*(SmallImgSize+Block3ySep)+SmallImgSize-30)/HOST=SLP_Util_ROICreate /N= SubROI2
	AppendImage/G=1 :Package_SLP:Util:ROI:ROIW_SubROI2
	modifygraph nolabel=1,tick=0,mirror=1
	ModifyImage ROIW_SubROI2 ctab= {*,*,Grays,0}
	ModifyGraph margin(left)=3,margin(bottom)=3,margin(top)=3,margin(right)=3,mirror=2
	
	Slider slider_ThresholdFullScrn,pos={Block3x+170,Block3y+40},size={80,SmallImgSize},proc=SliderProc_Util_ROI,ticks=10,thumbColor=(65535,0,0)
	Slider slider_ThresholdFullScrn,limits={-10108.7,3523.57,1},value= -739
	Slider slider_ImgThresholdSubArea1,pos={Block3x+170,Block3y+40+SmallImgSize+Block3ySep},size={80,SmallImgSize},proc=SliderProc_Util_ROI,ticks=10,thumbColor=(0,65535,0)
	Slider slider_ImgThresholdSubArea1,limits={-10108.7,3523.57,1},value= -1053
	Slider slider_ImgThresholdSubArea2,pos={Block3x+170,Block3y+40+2*(SmallImgSize+Block3ySep)-30},size={80,SmallImgSize},proc=SliderProc_Util_ROI
	Slider slider_ImgThresholdSubArea2,ticks=10,thumbColor=(0,0,60000)
	Slider slider_ImgThresholdSubArea2,limits={-10108.7,3523.57,1},value= -1437
	
	SetDrawLayer UserFront
	DrawText Block3x+180,50,"Threshold"

	//BLOCK4 - Bottom buttons and display
	Variable Block4Row1y=595
	Variable Block4Row2y=612
	
	TitleBox title_ScrnMskDraw,pos={15,577},size={283,12},disable=1,title="Press cmd-t to exit the ROI draw mode, then press 'Create mask'"
	TitleBox title_ScrnMskDraw,frame=1
	
	Button button_SaveROIW,pos={268,Block4Row1y},size={120,16},proc=ButtonProc_Util_ROI,title="Save to wave",fSize=10
	Button button_SaveInvROIW,pos={269,Block4Row2y},size={120,16},proc=ButtonProc_Util_ROI,title="Save inverse to wave",fSize=10
	Button button_SliderAdj,pos={467,Block4Row1y},size={120,16},proc=ButtonProc_Util_ROI,title="Threshold slider..",fSize=10
	Button button_DefaultSlider,pos={591,Block4Row1y},size={120,16},proc=ButtonProc_Util_ROI,title="Use default slider",fSize=10
	Button button_Done,pos={659,Block4Row2y},size={50,16},proc=ButtonProc_Util_ROI,title="Done",fSize=10

	SetVariable setvar_ResultWName,pos={15,Block4Row1y},size={250,15},title="Result ROI wave name"
	SetVariable setvar_ResultWName,value= root:Package_SLP:Util:ROI:ResultW_Name
	SetVariable setvar_ResultWName1,pos={14,Block4Row2y},size={250,15},title="Result inverse ROI wave name"
	SetVariable setvar_ResultWName1,value= root:Package_SLP:Util:ROI:InvResultW_Name
	
End

Function ListBoxProc_Util_ObjStv(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			Wave /T SLP_ObjStv_W=root:Package_SLP:Util:ObjStv:SLP_ObjStv_W
			Wave Obj_W=root:Package_SLP:Util:ObjStv:Obj_W
			Wave Stv_W=root:Package_SLP:Util:ObjStv:Stv_W
			Obj_W=str2num(SLP_ObjStv_W[p][1])
			Stv_W=str2num(SLP_ObjStv_W[p][0])
		
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End

Function ButtonProc_Util_ObjStv(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			StrSwitch (ba.ctrlName)
				case "button_done":
					Dowindow /K SLP_Util_ObjStvPanel
					break
				Case "button_Fit":
					Make/D/N=3/O root:Package_SLP:Util:ObjStv:W_coef /Wave=W_coef
					W_coef[0] = {1500,2,1.5}
					FuncFit/NTHR=0 SLP_FuncFit_OBJSTV W_coef  root:Package_SLP:Util:ObjStv:OBJ_W /D=root:Package_SLP:Util:ObjStv:ObjFit_W /X=root:Package_SLP:Util:ObjStv:STV_W
					RemoveFromGraph /W=SLP_Util_ObjStvPanel#G0 ObjFit_W
					Appendtograph /W=SLP_Util_ObjStvPanel#G0 root:Package_SLP:Util:ObjStv:ObjFit_W vs root:Package_SLP:Util:ObjStv:STV_W
					Modifygraph /W=SLP_Util_ObjStvPanel#G0 rgb(ObjFit_W)=(30000,30000,30000), lstyle(ObjFit_W)=2
					TextBox  /W=SLP_Util_ObjStvPanel#G0/A=RB /C/N=text0 "a0: "+num2str(W_coef[0])+"\ra1: "+num2str(W_coef[1])+"\ra2: "+num2str(W_coef[2])
					TextBox  /W=SLP_Util_ObjStvPanel#G0/A=LT /C/N=text2/F=0 "\Z12OBJ=a\B0\M\Z12+a\B1\M\Z12*STV\Sa2\M\Z12"
					break
				Case "button_Plot":
					Wave W_coef=root:Package_SLP:Util:ObjStv:W_coef
					Make /O /N=1001 root:Package_SLP:Util:ObjStv:ObjStvFit_W /Wave=ObjStvFit_W
					SetScale /I x,0,1000,ObjStvFit_W
					ObjStvFit_W=W_coef[0]+W_coef[1]*x^W_coef[2]
					Display ObjStvFit_W
					Modifygraph minor=1,mirror=1,tick=2
					Label bottom "Start voltage (V)"
					Label left "Objective lenses (mA)"
					ShowInfo
					Cursor A  ObjStvFit_W  5
					TextBox /A=RB /C/N=text0 "Calculated STV vs OBJ curve" 
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_Util_PanelObjStv() : Panel

	Dowindow /K SLP_Util_ObjStvPanel
	PauseUpdate; Silent 1		// building window...
	NewPanel /N=SLP_Util_ObjStvPanel /W=(70,120,575,415)
	SetDrawLayer UserBack
	SetDrawEnv fsize= 18
	DrawText 14,30,"Find parameters for OBJ vs STV"
	SetDrawEnv fsize= 14
	DrawText 12,52,"Objective lens vs Start Voltage plot"
	ListBox list_ObjStv,pos={295,55},size={190,190},proc=ListBoxProc_Util_ObjStv
	ListBox list_ObjStv,listWave=root:Package_SLP:Util:ObjStv:SLP_ObjStv_W
	ListBox list_ObjStv,selWave=root:Package_SLP:Util:ObjStv:SLP_ObjStv_SelW
	Button button_Done,pos={440,255},size={50,20},proc=ButtonProc_Util_ObjStv,title="Done",fsize=10
	Button button_Fit,pos={278,255},size={50,20},proc=ButtonProc_Util_ObjStv,title="Fit",fsize=10
	Button button_Plot,pos={335,255},size={100,20},proc=ButtonProc_Util_ObjStv,title="Plot result",fsize=10
	String fldrSav0= GetDataFolder(1)
	SetDataFolder root:Package_SLP:Util:ObjStv:
	Display/W=(12,58,273,278)/HOST=#  root:Package_SLP:Util:ObjStv:OBJ_W vs root:Package_SLP:Util:ObjStv:STV_W
	SetDataFolder fldrSav0
	ModifyGraph mode=3
	ModifyGraph marker=1
	ModifyGraph msize=4
	ModifyGraph mirror=1
	ModifyGraph minor=1
	Appendtograph /W=SLP_Util_ObjStvPanel#G0  root:Package_SLP:Util:ObjStv:OBJFit_W vs root:Package_SLP:Util:ObjStv:STV_W
	Modifygraph /W=SLP_Util_ObjStvPanel#G0 rgb(ObjFit_W)=(30000,30000,30000), lstyle(ObjFit_W)=2
	Label left "Objective lens (mA)"
	Label bottom "Start voltage (V)"
	RenameWindow #,G0
	SetActiveSubwindow ##
End

//[OBSOLETE] - Use Igor's UniqueName instead
//Function /S SLP_Util_AddNumToDataSet(InputName,DataSetListW)
//	//The datasetList wave has to contain names of the datasets in any column
//	string InputName
//	wave /T DataSetListW
//	
//	string SuggestedName=InputName
//	variable i=1
//	string last_char=""
//	
//	FindValue /TEXT=SuggestedName /TXOP=6 DataSetListW
//	If (V_Value!=-1)
//		SuggestedName+="_"+num2str(i)
//		FindValue /TEXT=SuggestedName /TXOP=6 DataSetListW
//		If (V_Value!=-1)
//			Do
//				SuggestedName=RemoveEnding(SuggestedName)
//				If (i<11)
//					SuggestedName+=num2str(i)
//				Else
//					SuggestedName=RemoveEnding(SuggestedName)
//					SuggestedName+=num2str(i) //Don't care if there are more than 99 datasets
//				Endif
//				i+=1	
//				FindValue /TEXT=SuggestedName /TXOP=6 DataSetListW
//			While (V_Value!=-1)
//		Endif
//	EndIf
//	Return SuggestedName
//End









Function SLP_Util_FOVExtraction(FOV_Txt)
	String FOV_Txt
	Variable FOV=0
	strswitch(FOV_Txt)	// string switch
		case "100µm[0.0°]":
			FOV=100		// execute if case matches expression
			break	
		case "75µm[0.0°]":
			FOV=75		// execute if case matches expression
			break				
		case "50µm[0.0°]":
			FOV=50		// execute if case matches expression
			break	
		case "25µm[0.0°]":
			FOV=25		// execute if case matches expression
			break	
		case "10µm[0.0°]":
			FOV=10		// execute if case matches expression
			break	
		case "5µm[0.0°]":
			FOV=5		// execute if case matches expression
			break	
		case "3µm[0.0°]":
			FOV=3		// execute if case matches expression
			break	
		case "2µm[0.0°]":
			FOV=2		// execute if case matches expression
			break	
		default:							// optional default expression executed
			FOV=0					// when no case matches
	endswitch
	Return FOV
End


Function CheckProc_LL_Preview(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba

	switch( cba.eventCode )
		case 2: // mouse up
			Variable checked = cba.checked
			
			NVAR ImgLoadPreview=root:Package_SLP:Util:AutoUpdateFileList:ImgLoadPreview
			ImgLoadPreview=checked
			
			NVAR ImgSel=root:Package_SLP:Util:AutoUpdateFileList:ImgSel
			
			SVAR ImgLocation=root:Package_SLP:Util:AutoUpdateFileList:imgLocation
			wave/T W_FileList=root:Package_SLP:Util:AutoUpdateFileList:W_FileList
			wave W_FileList_Sel=root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel
			wave M_PreviewedImg=root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg
		
			String CurrentImageName=stringfromlist(0,ImageNameList("SLP_LoadImg_Panel_01#ImgPlot_01",";"))
			String FileFLocation=ImgLocation+W_FileList[ImgSel][0]
			
			If (!Stringmatch(CurrentImageName,""))
					removeimage /W=SLP_LoadImg_Panel_01#ImgPlot_01 $CurrentImageName
			Endif
			
			If (ImgLoadPreview)
				SLP_LoadLEEM_LoadImage(FileFLocation,"root:Package_SLP:Util:AutoUpdateFileList:M_PreviewedImg")
				Appendimage /W=SLP_LoadImg_Panel_01#ImgPlot_01 M_PreviewedImg
				ModifyGraph /W=SLP_LoadImg_Panel_01#ImgPlot_01 tick=3,noLabel=2,margin=1
			EndIf
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End





Function SLP_Util_UpdateFolder(RawDataPath)
	string RawDataPath
	
	//If "", then ask to choose a folder.
	If (stringmatch(RawDataPath,""))
		GetFileFolderInfo /D /Q
		RawDataPath=S_Path
	Endif
	
	NewPath /Q /O SLP_symbPath, RawDataPath
	
	string FolderList=indexedDir(SLP_symbPath,-1,0)
	//print FolderList
	
	FolderList=sortlist(FolderList,";",16) //Option '16' is 'case-insensitive alphanumeric sort that sorts wave0 and wave9 before wave10.'
	
	make /O/T/N=(itemsinlist(FolderList,";"),8) root:Package_SLP:Util:AutoUpdateFileList:W_FolderList /WAVE=W_FolderList
	setDimLabel 1,0,FolderName,W_FolderList
	setDimLabel 1,1,DateCreated,W_FolderList
	setDimLabel 1,2,DateModified,W_FolderList
	setDimLabel 1,3,DateCreated_secs,W_FolderList
	setDimLabel 1,4,DateModified_secs,W_FolderList

	W_FolderList=""
	variable i=0
	For (i=0;i<itemsinlist(FolderList,";");i+=1)
		W_FolderList[i][0]=stringfromlist(i,FolderList,";")
		GetFileFolderInfo /P=SLP_symbPath /Q W_FolderList[i][0]
		W_FolderList[i][1]=secs2date(V_creationDate,2)+" "+secs2time(V_creationDate,3)
		W_FolderList[i][2]=secs2date(V_modificationDate,2)+" "+secs2time(V_modificationDate,3)
		W_FolderList[i][3]=num2str(V_creationDate)
		W_FolderList[i][4]=num2str(V_modificationDate)
	EndFor
End

Function SLP_Util_Create_FileListPanel() :Panel

End

Function SLP_Util_FileList(RawDataPath,Extension)
	string RawDataPath,Extension
	
	//If "", then ask to choose a folder.
	If (stringmatch(RawDataPath,""))
		GetFileFolderInfo /D /Q
		RawDataPath=S_Path
	Endif
	
	NewPath /Q /O SLP_symbPath, RawDataPath
	
	string FileList=indexedFile(SLP_symbPath,-1,Extension)
	
	FileList=sortlist(FileList,";",16) //Option '16' is 'case-insensitive alphanumeric sort that sorts wave0 and wave9 before wave10.'
	
	
	make /O/T/N=(itemsinlist(FileList,";"),8) root:Package_SLP:Util:AutoUpdateFileList:W_FileList /WAVE=W_FileList
	W_FileList=""
	setDimLabel 1,0,FileName,W_FileList
	setDimLabel 1,1,DateModified,W_FileList
	setDimLabel 1,2,DateCreated,W_FileList
	
	variable i=0
	For (i=0;i<itemsinlist(FileList,";");i+=1)
		W_FileList[i][0]=stringfromlist(i,FileList,";")
		GetFileFolderInfo /P=SLP_symbPath /Q W_FileList[i][0]
		W_FileList[i][1]=secs2date(V_modificationDate,0)+" "+secs2time(V_modificationDate,2)
		W_FileList[i][2]=secs2date(V_creationDate,0)+" "+secs2time(V_creationDate,2)
	EndFor
	
	make /O/N=(dimsize(W_FileList,0),dimsize(W_FileList,1)) root:Package_SLP:Util:AutoUpdateFileList:W_FileList_Sel /WAVE=W_FileList_Sel
	W_FileList_Sel=0
End

Function /T SLP_Util_FindElement(PeakPos,FindRange) //PeakPos in B.E.
	variable PeakPos,FindRange
	string OutputTxt=""
	variable Table_Exists_Flg=0
	
	If (Exists("root:Package_SLP:Util:DB:SLP_BE_W"))
		wave /T SLP_BE_W=root:Package_SLP:Util:DB:SLP_BE_W
		Table_Exists_Flg=1
	Else
		DoAlert 1,"No BE data. Find the BE wave?"
		If (V_Flag==1)
			String CurrentFolder=GetDataFolder(1)
			NewDataFolder root:Package_SLP:Util:DB
			SetDataFolder root:Package_SLP:Util:DB
			LoadWave
			wave /T SLP_BE_W=root:Package_SLP:Util:DB:SLP_BE_W
			Table_Exists_Flg=1
			SetDataFolder $CurrentFolder
		EndIf
	Endif
		
	If (Table_Exists_Flg)
		duplicate /T/O/r=[][3] SLP_BE_W SingleBE_txtW
		redimension /N=-1 SingleBE_txtW
		make /O/N=(dimsize(SingleBE_txtW,0)) SingleBE_numW
		SingleBE_numW=str2num(SingleBE_txtW)
		make /T/O/N=(0,4) root:Package_SLP:Util:FindElement:SLP_ResultElements_textW /WAVE=SLP_ResultElements_textW
		
		variable findStep=0.1 //0.1 eV resolution in the XDB database
		FindLevel /Q SingleBE_numW,PeakPos-FindRange
		
		variable i=0 //Index for the Result wave
		variable CurrentPos=0 //Index for the Binding Energy values
		
		For (CurrentPos=ceil(V_LevelX);SingleBE_numW[CurrentPos]<=PeakPos+FindRange;CurrentPos+=1)
			//redimension SLP_ResultElements_textW
			redimension /N=(dimsize(SLP_ResultElements_textW,0)+1,dimsize(SLP_ResultElements_textW,1)) SLP_ResultElements_textW
			SLP_ResultElements_textW[i][]=SLP_BE_W[CurrentPos][q]
			OutputTxt=OutPutTxt+SLP_ResultElements_textW[i][1]+SLP_ResultElements_textW[i][2]+"["+SLP_ResultElements_textW[i][3]+"eV];\r"
			i+=1
		EndFor
		
		killwaves SingleBE_txtW
		killwaves SingleBE_numW
	
	Endif
	
	Return OutputTxt
End

Function /T SLP_Util_FindAuger(PeakPos,FindRange) //PeakPos in K.E.
	variable PeakPos,FindRange
	String OutputTxt=""
	variable Table_Exists_Flg=0
	
	If (Exists("root:Package_SLP:Util:DB:SLP_Auger_W"))
		wave /T SLP_Auger_W=root:Package_SLP:Util:DB:SLP_Auger_W
		Table_Exists_Flg=1
	Else
		DoAlert 1,"No Auger data. Find the Auger binary wave?"
		If (V_Flag==1)
			String CurrentFolder=GetDataFolder(1)
			NewDataFolder /O root:Package_SLP:Util:DB
			SetDataFolder root:Package_SLP:Util:DB
			LoadWave
			wave /T SLP_Auger_W=root:Package_SLP:Util:DB:SLP_Auger_W
			Table_Exists_Flg=1
			SetDataFolder $CurrentFolder
		EndIf
	Endif
	
	If (Table_Exists_Flg)
		duplicate /T/O/r=[][2] SLP_Auger_W SingleAES_txtW
		redimension /N=-1 SingleAES_txtW
		make /O/N=(dimsize(SingleAES_txtW,0)) SingleAES_numW
		SingleAES_numW=str2num(SingleAES_txtW)
		make /T/O/N=(0,4) root:Package_SLP:Util:FindAuger:SLP_ResultAuger_textW /WAVE=SLP_ResultAuger_textW
		
		variable findStep=0.1 //0.1 eV resolution in the XDB database
		FindLevel /Q SingleAES_numW,PeakPos-FindRange
		
		variable i=0 //Index for the Result wave
		variable CurrentPos=0 //Index for the Binding Energy values
		
		For (CurrentPos=ceil(V_LevelX);SingleAES_numW[CurrentPos]<=PeakPos+FindRange;CurrentPos+=1)
			//redimension SLP_ResultElements_textW
			redimension /N=(dimsize(SLP_ResultAuger_textW,0)+1,dimsize(SLP_ResultAuger_textW,1)) SLP_ResultAuger_textW
			SLP_ResultAuger_textW[i][]=SLP_Auger_W[CurrentPos][q]
			OutputTxt=OutPutTxt+SLP_ResultAuger_textW[i][0]+" "+SLP_ResultAuger_textW[i][1]+"["+SLP_ResultAuger_textW[i][2]+"eV];\r"
			i+=1
		EndFor
		
		killwaves SingleAES_txtW
		killwaves SingleAES_numW
	Endif
	
	Return OutputTxt
End

Function SLP_Util_LoadDB()
	
	if (!DataFolderExists("root:Package_SLP:Util:DB"))
		String Current_folder=getdatafolder(1)
		NewDataFolder/S root:Package_SLP:Util:DB // /S=set data folder audomatically
		
		DoAlert 1,"Find the BE wave?"
		If (V_Flag==1)
			LoadWave
		EndIf
		DoAlert 1,"Find the Auger wave?"
		If (V_Flag==1)
			LoadWave
		EndIf
		
		SetDatafolder $Current_Folder
	endif
End


//Periodic table binding energy (PT)

Function SLP_Util_PT_Init()
	String Current_folder=getdatafolder(1)
	if (!DataFolderExists("root:Package_SLP:Util:PT"))
		NewDataFolder/S root:Package_SLP:Util:PT
		SetDatafolder root:Package_SLP:Util:PT
		variable MaxElem=109
		
		Make /T/N=(MaxElem,8) PT_EList
		PT_EList[][0]="0" //Button color R
		PT_EList[][1]="0" //Button color G
		PT_EList[][2]="0" //Button color B
		PT_EList[][3]=num2str(p) //Atomic No.
		PT_EList[0][4]= {"","H","He","Li","Be","B","C","N","O","F","Ne","Na","Mg","Al","Si","P","S","Cl","Ar","K","Ca","Sc","Ti","V","Cr","Mn","Fe","Co","Ni","Cu","Zn","Ga","Ge","As","Se","Br","Kr","Rb","Sr","Y"}
		PT_EList[40][4]= {"Zr","Nb","Mo","Tc","Ru","Rh","Pd","Ag","Cd","In","Sn","Sb","Te","I","Xe","Cs","Ba","La","Ce","Pr","Nd","Pm","Sm","Eu","Gd","Tb","Dy","Ho","Er","Tm","Yb","Lu","Hf","Ta","W","Re","Os","Ir"}
		PT_EList[78][4]= {"Pt","Au","Hg","Tl","Pb","Bi","Po","At","Rn","Fr","Ra","Ac","Th","Pa","U","Np","Pu","Am","Cm","Bk","Cf","Es","Fm","Md","No","Lr","Rf","Db","Sg","Bh","Hs"}
		PT_EList[][5]="0" //SEL FLG
		
		Make /T/N=(256,8)  root:Package_SLP:Util:PT:XPSTagW /WAVE=XPSTagW
		Duplicate /O/T root:Package_SLP:Util:PT:XPSTagW,root:Package_SLP:Util:PT:XPSTagW_Old
		XPSTagW=""
		
		Make /T/N=(128,8) root:Package_SLP:Util:PT:CustomEnergyLineW /WAVE=CustomEnergyLineW
		SetDimLabel 1,0,Select,CustomEnergyLineW
		SetDimLabel 1,1,Name,CustomEnergyLineW
		SetDimLabel 1,2,BE,CustomEnergyLineW
		SetDimLabel 1,3,Note,CustomEnergyLineW
		//Examples
		CustomEnergyLineW[0][1]="VB",CustomEnergyLineW[0][2]="3"
		CustomEnergyLineW[1][1]="N1s nitrides",CustomEnergyLineW[1][2]="398"
		CustomEnergyLineW[2][1]="O1s oxides",CustomEnergyLineW[2][2]="531"
		
		Make /N=(128,8) root:Package_SLP:Util:PT:CustomEnergyLineSelW /WAVE=CustomEnergyLineSelW
		CustomEnergyLineSelW[][0]=32
		CustomEnergyLineSelW[][1]=2
		CustomEnergyLineSelW[][2]=2
		CustomEnergyLineSelW[][3]=2
		
		SetDatafolder $Current_Folder
	endif
End

Function SLP_Util_PT_GetAtomicN(EName)
	String EName
	Variable i=0
	Wave /T PT_EList=root:Package_SLP:Util:PT:PT_EList
	For (i=0;i<105;i+=1)
		If (Stringmatch(EName,PT_EList[i][4]))
			return i
		EndIf
	EndFor
	Return -1
End

Function SLP_Util_PT_AddPeriodicTable(PanelName,left,top,gscf)
	String PanelName
	Variable left,top,gscf
	//gscf=table scale
	
	variable bw=20*gscf,bh=15*gscf 
	variable dfs=9
	
	wave /T PT_EList=root:Package_SLP:Util:PT:PT_EList
	
	// the element buttons	
	Button H0,win=$PanelName,pos={left,top},size={bw,bh},fColor=(str2num(PT_EList[1][0]),str2num(PT_EList[1][1]),str2num(PT_EList[1][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="H"
	
	Button Li0,win=$PanelName,pos={left,top+bh},size={bw,bh},fColor=(str2num(PT_EList[3][0]),str2num(PT_EList[3][1]),str2num(PT_EList[3][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Li"
	Button Na0,win=$PanelName,pos={left,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[11][0]),str2num(PT_EList[11][1]),str2num(PT_EList[11][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Na"
	Button K0,win=$PanelName,pos={left,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[19][0]),str2num(PT_EList[19][1]),str2num(PT_EList[19][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="K"
	Button Rb0,win=$PanelName,pos={left,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[37][0]),str2num(PT_EList[37][1]),str2num(PT_EList[37][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Rb"
	Button Cs0,win=$PanelName,pos={left,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[55][0]),str2num(PT_EList[55][1]),str2num(PT_EList[55][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cs"
	Button Fr0,win=$PanelName,pos={left,top+6*bh},size={bw,bh},fColor=(str2num(PT_EList[87][0]),str2num(PT_EList[87][1]),str2num(PT_EList[87][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Fr"

	Button Be0,win=$PanelName,pos={left+bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[4][0]),str2num(PT_EList[4][1]),str2num(PT_EList[4][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Be"
	Button Mg0,win=$PanelName,pos={left+bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[12][0]),str2num(PT_EList[12][1]),str2num(PT_EList[12][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Mg"
	Button Ca0,win=$PanelName,pos={left+bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[20][0]),str2num(PT_EList[20][1]),str2num(PT_EList[20][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ca"
	Button Sr0,win=$PanelName,pos={left+bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[38][0]),str2num(PT_EList[38][1]),str2num(PT_EList[38][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Sr"
	Button Ba0,win=$PanelName,pos={left+bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[56][0]),str2num(PT_EList[56][1]),str2num(PT_EList[56][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ba"
	Button Ra0,win=$PanelName,pos={left+bw,top+6*bh},size={bw,bh},fColor=(str2num(PT_EList[88][0]),str2num(PT_EList[88][1]),str2num(PT_EList[88][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ra"

	Button Sc0,win=$PanelName,pos={left+2*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[21][0]),str2num(PT_EList[21][1]),str2num(PT_EList[21][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Sc"
	Button Ti0,win=$PanelName,pos={left+3*bw,top+3*bh},fColor=(str2num(PT_EList[22][0]),str2num(PT_EList[22][1]),str2num(PT_EList[22][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ti"
	Button V0,win=$PanelName,pos={left+4*bw,top+3*bh},fColor=(str2num(PT_EList[23][0]),str2num(PT_EList[23][1]),str2num(PT_EList[23][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="V"
	Button Cr0,win=$PanelName,pos={left+5*bw,top+3*bh},fColor=(str2num(PT_EList[24][0]),str2num(PT_EList[24][1]),str2num(PT_EList[24][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cr"
	Button Mn0,win=$PanelName,pos={left+6*bw,top+3*bh},fColor=(str2num(PT_EList[24][0]),str2num(PT_EList[25][1]),str2num(PT_EList[25][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Mn"
	Button Fe0,win=$PanelName,pos={left+7*bw,top+3*bh},fColor=(str2num(PT_EList[26][0]),str2num(PT_EList[26][1]),str2num(PT_EList[26][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Fe"
	Button Co0,win=$PanelName,pos={left+8*bw,top+3*bh},fColor=(str2num(PT_EList[27][0]),str2num(PT_EList[27][1]),str2num(PT_EList[27][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Co"
	Button Ni0,win=$PanelName,pos={left+9*bw,top+3*bh},fColor=(str2num(PT_EList[28][0]),str2num(PT_EList[28][1]),str2num(PT_EList[28][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ni"
	Button Cu0,win=$PanelName,pos={left+10*bw,top+3*bh},fColor=(str2num(PT_EList[29][0]),str2num(PT_EList[29][1]),str2num(PT_EList[29][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cu"
	Button Zn0,win=$PanelName,pos={left+11*bw,top+3*bh},fColor=(str2num(PT_EList[30][0]),str2num(PT_EList[30][1]),str2num(PT_EList[30][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Zn"

	Button Y0,win=$PanelName,pos={left+2*bw,top+4*bh},fColor=(str2num(PT_EList[39][0]),str2num(PT_EList[39][1]),str2num(PT_EList[39][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Y"
	Button Zr0,win=$PanelName,pos={left+3*bw,top+4*bh},fColor=(str2num(PT_EList[40][0]),str2num(PT_EList[40][1]),str2num(PT_EList[40][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Zr"
	Button Nb0,win=$PanelName,pos={left+4*bw,top+4*bh},fColor=(str2num(PT_EList[41][0]),str2num(PT_EList[41][1]),str2num(PT_EList[41][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Nb"
	Button Mo0,win=$PanelName,pos={left+5*bw,top+4*bh},fColor=(str2num(PT_EList[42][0]),str2num(PT_EList[42][1]),str2num(PT_EList[42][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Mo"
	Button Tc0,win=$PanelName,pos={left+6*bw,top+4*bh},fColor=(str2num(PT_EList[43][0]),str2num(PT_EList[43][1]),str2num(PT_EList[43][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Tc"
	Button Ru0,win=$PanelName,pos={left+7*bw,top+4*bh},fColor=(str2num(PT_EList[44][0]),str2num(PT_EList[44][1]),str2num(PT_EList[44][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ru"
	Button Rh0,win=$PanelName,pos={left+8*bw,top+4*bh},fColor=(str2num(PT_EList[45][0]),str2num(PT_EList[45][1]),str2num(PT_EList[45][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Rh"
	Button Pd0,win=$PanelName,pos={left+9*bw,top+4*bh},fColor=(str2num(PT_EList[46][0]),str2num(PT_EList[46][1]),str2num(PT_EList[46][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pd"
	Button Ag0,win=$PanelName,pos={left+10*bw,top+4*bh},fColor=(str2num(PT_EList[47][0]),str2num(PT_EList[47][1]),str2num(PT_EList[47][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ag"
	Button Cd0,win=$PanelName,pos={left+11*bw,top+4*bh},fColor=(str2num(PT_EList[48][0]),str2num(PT_EList[48][1]),str2num(PT_EList[48][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cd"

	Button La0,win=$PanelName,pos={left+2*bw,top+5*bh},fColor=(str2num(PT_EList[57][0]),str2num(PT_EList[57][1]),str2num(PT_EList[57][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="La"
	Button Hf0,win=$PanelName,pos={left+3*bw,top+5*bh},fColor=(str2num(PT_EList[72][0]),str2num(PT_EList[72][1]),str2num(PT_EList[72][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Hf"
	Button Ta0,win=$PanelName,pos={left+4*bw,top+5*bh},fColor=(str2num(PT_EList[73][0]),str2num(PT_EList[73][1]),str2num(PT_EList[73][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ta"
	Button W0,win=$PanelName,pos={left+5*bw,top+5*bh},fColor=(str2num(PT_EList[74][0]),str2num(PT_EList[74][1]),str2num(PT_EList[74][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="W"
	Button Re0,win=$PanelName,pos={left+6*bw,top+5*bh},fColor=(str2num(PT_EList[75][0]),str2num(PT_EList[75][1]),str2num(PT_EList[75][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Re"
	Button Os0,win=$PanelName,pos={left+7*bw,top+5*bh},fColor=(str2num(PT_EList[76][0]),str2num(PT_EList[76][1]),str2num(PT_EList[76][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Os"
	Button Ir0,win=$PanelName,pos={left+8*bw,top+5*bh},fColor=(str2num(PT_EList[77][0]),str2num(PT_EList[77][1]),str2num(PT_EList[77][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ir"
	Button Pt0,win=$PanelName,pos={left+9*bw,top+5*bh},fColor=(str2num(PT_EList[78][0]),str2num(PT_EList[78][1]),str2num(PT_EList[78][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pt"
	Button Au0,win=$PanelName,pos={left+10*bw,top+5*bh},fColor=(str2num(PT_EList[79][0]),str2num(PT_EList[79][1]),str2num(PT_EList[79][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Au"
	Button Hg0,win=$PanelName,pos={left+11*bw,top+5*bh},fColor=(str2num(PT_EList[80][0]),str2num(PT_EList[80][1]),str2num(PT_EList[80][2])),size={bw,bh},fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Hg"

	Button Ac0,win=$PanelName,pos={left+2*bw,top+6*bh},size={bw,bh},fColor=(str2num(PT_EList[89][0]),str2num(PT_EList[89][1]),str2num(PT_EList[89][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ac"
//	Button Rf0,win=$PanelName,pos={left+3*bw,top+6*bh},size={bw,bh},fColor=(str2num(PT_EList[104][0]),str2num(PT_EList[104][1]),str2num(PT_EList[104][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Rf"
//	Button Ha0,win=$PanelName,pos={left+4*bw,top+6*bh},size={bw,bh},fColor=(str2num(PT_EList[105][0]),str2num(PT_EList[105][1]),str2num(PT_EList[105][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ha"

	Button He0,win=$PanelName,pos={left+17*bw,top},size={bw,bh},fColor=(str2num(PT_EList[2][0]),str2num(PT_EList[2][1]),str2num(PT_EList[2][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="He"

	Button B0,win=$PanelName,pos={left+12*bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[5][0]),str2num(PT_EList[5][1]),str2num(PT_EList[5][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="B"
	Button C0,win=$PanelName,pos={left+13*bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[6][0]),str2num(PT_EList[6][1]),str2num(PT_EList[6][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="C"
	Button N0,win=$PanelName,pos={left+14*bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[7][0]),str2num(PT_EList[7][1]),str2num(PT_EList[7][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="N"
	Button O0,win=$PanelName,pos={left+15*bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[8][0]),str2num(PT_EList[8][1]),str2num(PT_EList[8][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="O"
	Button F0,win=$PanelName,pos={left+16*bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[9][0]),str2num(PT_EList[9][1]),str2num(PT_EList[9][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="F"
	Button Ne0,win=$PanelName,pos={left+17*bw,top+bh},size={bw,bh},fColor=(str2num(PT_EList[10][0]),str2num(PT_EList[10][1]),str2num(PT_EList[10][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ne"

	Button Al0,win=$PanelName,pos={left+12*bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[13][0]),str2num(PT_EList[13][1]),str2num(PT_EList[13][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Al"
	Button Si0,win=$PanelName,pos={left+13*bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[14][0]),str2num(PT_EList[14][1]),str2num(PT_EList[14][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Si"
	Button P0,win=$PanelName,pos={left+14*bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[15][0]),str2num(PT_EList[15][1]),str2num(PT_EList[15][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="P"
	Button S0,win=$PanelName,pos={left+15*bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[16][0]),str2num(PT_EList[16][1]),str2num(PT_EList[16][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="S"
	Button Cl0,win=$PanelName,pos={left+16*bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[17][0]),str2num(PT_EList[17][1]),str2num(PT_EList[17][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cl"
	Button Ar0,win=$PanelName,pos={left+17*bw,top+2*bh},size={bw,bh},fColor=(str2num(PT_EList[18][0]),str2num(PT_EList[18][1]),str2num(PT_EList[18][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ar"

	Button Ga0,win=$PanelName,pos={left+12*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[31][0]),str2num(PT_EList[31][1]),str2num(PT_EList[31][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ga"
	Button Ge0,win=$PanelName,pos={left+13*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[32][0]),str2num(PT_EList[32][1]),str2num(PT_EList[32][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ge"
	Button As0,win=$PanelName,pos={left+14*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[33][0]),str2num(PT_EList[33][1]),str2num(PT_EList[33][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="As"
	Button Se0,win=$PanelName,pos={left+15*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[34][0]),str2num(PT_EList[34][1]),str2num(PT_EList[34][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Se"
	Button Br0,win=$PanelName,pos={left+16*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[35][0]),str2num(PT_EList[35][1]),str2num(PT_EList[35][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Br"
	Button Kr0,win=$PanelName,pos={left+17*bw,top+3*bh},size={bw,bh},fColor=(str2num(PT_EList[36][0]),str2num(PT_EList[36][1]),str2num(PT_EList[36][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Kr"

	Button In0,win=$PanelName,pos={left+12*bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[49][0]),str2num(PT_EList[49][1]),str2num(PT_EList[49][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="In"
	Button Sn0,win=$PanelName,pos={left+13*bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[50][0]),str2num(PT_EList[50][1]),str2num(PT_EList[50][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Sn"
	Button Sb0,win=$PanelName,pos={left+14*bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[51][0]),str2num(PT_EList[51][1]),str2num(PT_EList[51][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Sb"
	Button Te0,win=$PanelName,pos={left+15*bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[52][0]),str2num(PT_EList[52][1]),str2num(PT_EList[52][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Te"
	Button I0,win=$PanelName,pos={left+16*bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[53][0]),str2num(PT_EList[53][1]),str2num(PT_EList[53][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="I"
	Button Xe0,win=$PanelName,pos={left+17*bw,top+4*bh},size={bw,bh},fColor=(str2num(PT_EList[54][0]),str2num(PT_EList[54][1]),str2num(PT_EList[54][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Xe"

	Button Tl0,win=$PanelName,pos={left+12*bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[81][0]),str2num(PT_EList[81][1]),str2num(PT_EList[81][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Tl"
	Button Pb0,win=$PanelName,pos={left+13*bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[82][0]),str2num(PT_EList[82][1]),str2num(PT_EList[82][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pb"
	Button Bi0,win=$PanelName,pos={left+14*bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[83][0]),str2num(PT_EList[83][1]),str2num(PT_EList[83][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Bi"
	Button Po0,win=$PanelName,pos={left+15*bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[84][0]),str2num(PT_EList[84][1]),str2num(PT_EList[84][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Po"
	Button At0,win=$PanelName,pos={left+16*bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[85][0]),str2num(PT_EList[85][1]),str2num(PT_EList[85][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="At"
	Button Rn0,win=$PanelName,pos={left+17*bw,top+5*bh},size={bw,bh},fColor=(str2num(PT_EList[86][0]),str2num(PT_EList[86][1]),str2num(PT_EList[86][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Rn"

	Button Ce0,win=$PanelName,pos={left+4*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[58][0]),str2num(PT_EList[58][1]),str2num(PT_EList[58][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ce"
	Button Pr0,win=$PanelName,pos={left+5*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[59][0]),str2num(PT_EList[59][1]),str2num(PT_EList[59][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pr"
	Button Nd0,win=$PanelName,pos={left+6*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[60][0]),str2num(PT_EList[60][1]),str2num(PT_EList[60][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Nd"
	Button Pm0,win=$PanelName,pos={left+7*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[61][0]),str2num(PT_EList[61][1]),str2num(PT_EList[61][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pm"
	Button Sm0,win=$PanelName,pos={left+8*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[62][0]),str2num(PT_EList[62][1]),str2num(PT_EList[63][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Sm"
	Button Eu0,win=$PanelName,pos={left+9*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[63][0]),str2num(PT_EList[63][1]),str2num(PT_EList[63][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Eu"
	Button Gd0,win=$PanelName,pos={left+10*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[64][0]),str2num(PT_EList[64][1]),str2num(PT_EList[64][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Gd"
	Button Tb0,win=$PanelName,pos={left+11*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[65][0]),str2num(PT_EList[65][1]),str2num(PT_EList[65][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Tb"
	Button Dy0,win=$PanelName,pos={left+12*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[66][0]),str2num(PT_EList[66][1]),str2num(PT_EList[66][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Dy"
	Button Ho0,win=$PanelName,pos={left+13*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[67][0]),str2num(PT_EList[67][1]),str2num(PT_EList[67][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Ho"
	Button Er0,win=$PanelName,pos={left+14*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[68][0]),str2num(PT_EList[68][1]),str2num(PT_EList[68][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Er"
	Button Tm0,win=$PanelName,pos={left+15*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[69][0]),str2num(PT_EList[69][1]),str2num(PT_EList[69][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Tm"
	Button Yb0,win=$PanelName,pos={left+16*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[70][0]),str2num(PT_EList[70][1]),str2num(PT_EList[70][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Yb"
	Button Lu0,win=$PanelName,pos={left+17*bw,top+7.0*bh},size={bw,bh},fColor=(str2num(PT_EList[71][0]),str2num(PT_EList[71][1]),str2num(PT_EList[71][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Lu"
	
	Button Th0,win=$PanelName,pos={left+4*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[90][0]),str2num(PT_EList[90][1]),str2num(PT_EList[90][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Th"
	Button Pa0,win=$PanelName,pos={left+5*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[91][0]),str2num(PT_EList[91][1]),str2num(PT_EList[91][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pa"
	Button U0,win=$PanelName,pos={left+6*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[92][0]),str2num(PT_EList[92][1]),str2num(PT_EList[92][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="U"
	Button Np0,win=$PanelName,pos={left+7*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[93][0]),str2num(PT_EList[93][1]),str2num(PT_EList[93][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Np"
	Button Pu0,win=$PanelName,pos={left+8*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[94][0]),str2num(PT_EList[94][1]),str2num(PT_EList[94][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Pu"
	Button Am0,win=$PanelName,pos={left+9*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[95][0]),str2num(PT_EList[95][1]),str2num(PT_EList[95][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Am"
	Button Cm0,win=$PanelName,pos={left+10*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[96][0]),str2num(PT_EList[96][1]),str2num(PT_EList[96][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cm"
	Button Bk0,win=$PanelName,pos={left+11*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[97][0]),str2num(PT_EList[97][1]),str2num(PT_EList[97][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Bk"
	Button Cf0,win=$PanelName,pos={left+12*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[98][0]),str2num(PT_EList[98][1]),str2num(PT_EList[98][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Cf"
	Button Es0,win=$PanelName,pos={left+13*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[99][0]),str2num(PT_EList[99][1]),str2num(PT_EList[99][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Es"
	Button Fm0,win=$PanelName,pos={left+14*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[100][0]),str2num(PT_EList[100][1]),str2num(PT_EList[100][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Fm"
	Button Md0,win=$PanelName,pos={left+15*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[101][0]),str2num(PT_EList[101][1]),str2num(PT_EList[101][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Md"
	Button No0,win=$PanelName,pos={left+16*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[102][0]),str2num(PT_EList[102][1]),str2num(PT_EList[102][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="No"
	Button Lr0,win=$PanelName,pos={left+17*bw,top+8.0*bh},size={bw,bh},fColor=(str2num(PT_EList[103][0]),str2num(PT_EList[103][1]),str2num(PT_EList[103][2])),fsize=gscf*dfs,proc=ButtonProc_Util_PT,title="Lr"
	
End

Function SLP_Util_PT_GenXPSTag()
	Wave /T PT_EList=root:Package_SLP:Util:PT:PT_EList
	Wave /T SLP_BE_W=root:Package_SLP:Util:DB:SLP_BE_W
	Wave /T SLP_Auger_W=root:Package_SLP:Util:DB:SLP_Auger_W
	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW
	Wave /T CustomEnergyLineW=root:Package_SLP:Util:PT:CustomEnergyLineW
	Wave  CustomEnergyLineSelW=root:Package_SLP:Util:PT:CustomEnergyLineSelW
	
	Variable i,j,k
	i=0;j=0;k=0;
	String EName=""
	String OrbitalName=""
	Duplicate /O/T XPSTagW,root:Package_SLP:Util:PT:XPSTagW_Old
	XPSTagW=""
	
	For (i=0;i<109;i+=1) //Loop over the whole Element list
		If (Stringmatch(PT_EList[i][5],"1")) //Check for ones that are selected
			EName=PT_EList[i][4]
			For (j=0;j<dimsize(SLP_BE_W,0);j+=1) //Loop over the BE DB
				If (StringMatch(EName,SLP_BE_W[j][1]))
					XPSTagW[k][0]=EName //Element symbol
					XPSTagW[k][1]=SLP_BE_W[j][2] //Orbital
					XPSTagW[k][2]=SLP_BE_W[j][3] //Binding energy
					XPSTagW[k][3]="XPS"
					k+=1
				EndIf
			EndFor
			For (j=0;j<dimsize(SLP_Auger_W,0);j+=1) //Loop over the Auger DB
				If (StringMatch(EName,SLP_Auger_W[j][0]))
					XPSTagW[k][0]=EName //Element symbol
					XPSTagW[k][1]=SLP_Auger_W[j][1] //Auger symbol
					XPSTagW[k][2]=SLP_Auger_W[j][2] //K.E.
					XPSTagW[k][3]="Auger"
					k+=1
				EndIf
			EndFor
		EndIF
	EndFor
	
	For (i=0;i<dimsize(CustomEnergyLineW,0);i+=1)
		If (CustomEnergyLineSelW[i][0]==48)
			XPSTagW[k][0]=CustomEnergyLineW[i][1]
			XPSTagW[k][1]=""
			XPSTagW[k][2]=CustomEnergyLineW[i][2]
			XPSTagW[k][3]="Custom"
			k+=1
		EndIf
	EndFor
	
End

//Function SLP_DXPS_InsertETag()
//	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW
//	Wave /T XPSTagW_Old=root:Package_SLP:Util:PT:XPSTagW_Old
//	Variable i=0
//	String TagString=""
//	String TagName=""
//	Variable TagPos=0
//	Variable TagLineLength=35
//	
//	//Remove all previous tags first
//	For (i=0;i<dimsize(XPSTagW_Old,0);i+=1)
//		If (!StringMatch(XPSTagW_Old[i][0],""))
//			TagString=XPSTagW_Old[i][0]+XPSTagW_Old[i][1]
//			TagName=cleanupname(TagString,0) //Make name compatible
//			Tag /K/N=$TagName/W=SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA
//		EndIF
//	EndFor
//	//Update tags
//	For (i=0;i<dimsize(XPSTagW,0);i+=1)
//		If (!StringMatch(XPSTagW[i][0],""))
//			TagString=XPSTagW[i][0]+XPSTagW[i][1]
//			TagName=cleanupname(TagString,0) //Make name compatible
//			TagPos=str2num(XPSTagW[i][2])
//			Tag /N=$TagName/W=SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA /F=0/TL={dash=2} /L=1/C/X=0/Y=(TagLineLength) bottom, TagPos,TagString
//		Else
//			Return 0
//		EndIF
//	EndFor
//End

Function SLP_DXPS_RemoveETag(GraphName)
	String GraphName
	
	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW
	Variable i=0
	String TagString=""
	String TagName=""
	Variable TagPos=0
	Variable TagLineLength=35
	
	//Remove all previous tags first
	For (i=0;i<dimsize(XPSTagW,0);i+=1)
		If (!StringMatch(XPSTagW[i][0],""))
			TagString=XPSTagW[i][0]+XPSTagW[i][1]
			TagName=cleanupname(TagString,0) //Make name compatible
			Tag /K/N=$TagName/W=$GraphName
		EndIF
	EndFor
	
End

Function SLP_DXPS_PT_UpdateTag()
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	variable PT_XPS_Flg=str2num(SLP_DXPS_ScanListW[SelRow][29])
	variable PT_Auger_Flg=str2num(SLP_DXPS_ScanListW[SelRow][30])
	variable PT_Custom_Flg=str2num(SLP_DXPS_ScanListW[SelRow][31])
	
	SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
	If (PT_XPS_Flg)
		SLP_UTIL_InsertXPSTag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA",0)
	EndIf
	If (PT_Auger_Flg)
		SLP_UTIL_InsertAugerTag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA",0)
	EndIf
	If (PT_Custom_Flg)
		SLP_Util_InsertCustomTag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA",0)
	EndIf
End



Function SLP_Util_InsertXPSTag(GraphName,OnTrace_Flg)
	String GraphName
	Variable OnTrace_Flg
	
	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW
	Variable i=0
	String TagString=""
	String TagName=""
	String TagOrbit=""
	Variable TagPos=0
	Variable RandomY=0 
	Variable TagLineLength=35
	String TraceName=StringFromList(0,TraceNameList(GraphName,";",1),";")
	
	//Update tags
	For (i=0;i<dimsize(XPSTagW,0);i+=1)
		If (!StringMatch(XPSTagW[i][0],""))
			TagOrbit=XPSTagW[i][1]
			TagString=XPSTagW[i][0]+TagOrbit
			TagName=cleanupname(TagString,0) //Make name compatible
			If (Stringmatch(XPSTagW[i][3],"XPS"))//BE  - 1s, 2s, 2p3/2... (start with number)
				TagPos=str2num(XPSTagW[i][2])
				If (!OnTrace_Flg)
					Tag /N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=0/Y=(TagLineLength) bottom, TagPos,TagString
				Else
					RandomY=gnoise(1)*10+20
					Tag /N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=5/Y=(RandomY) $TraceName, TagPos,TagString
				EndIf
			EndIf
		Else
			Return 0
		EndIF
	EndFor
End



Function SLP_Util_InsertAugerTag(GraphName,OnTrace_Flg)
	//[NOTE]**STILL dependent on the DispXPS panel - need to find the hv, aWF in order to determine the auger position
	String GraphName
	Variable OnTrace_Flg
	
	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW
	Variable i=0
	String TagString=""
	String TagName=""
	String TagOrbit=""
	Variable TagPos=0
	Variable RandomY=0 
	Variable TagLineLength=33
	String TraceName=StringFromList(0,TraceNameList(GraphName,";",1),";")
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	variable SelRow=V_Value
	variable hv=str2num(SLP_DXPS_ScanListW[SelRow][17])
	variable aWF=str2num(SLP_DXPS_ScanListW[SelRow][18])
	
	//Update tags
	For (i=0;i<dimsize(XPSTagW,0);i+=1)
		If (!StringMatch(XPSTagW[i][0],""))
			TagOrbit=XPSTagW[i][1]
			TagString=XPSTagW[i][0]+TagOrbit
			TagName=cleanupname(TagString,0) //Make name compatible
			If (Stringmatch(XPSTagW[i][3],"Auger")) //Auger KLL, LMM, ... (start with K,L,M,...)
				TagPos=hv-aWF-str2num(XPSTagW[i][2])
				
				If (!OnTrace_Flg)
					Tag /G=(10000,50000,10000 )/N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=0/Y=(TagLineLength) bottom, TagPos,TagString
				Else
					RandomY=gnoise(1)*10+20
					Tag /G=(10000,50000,10000 )/N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=5/Y=(RandomY) $TraceName, TagPos,TagString
				EndIf
		
			EndIf
		Else
			Return 0
		EndIF
	EndFor
End

Function SLP_Util_InsertCustomTag(GraphName,OnTrace_Flg)
	String GraphName
	Variable OnTrace_Flg
	
	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW

	Variable i=0
	String TagString=""
	String TagName=""
	String TagOrbit=""
	Variable TagPos=0
	Variable RandomY=0 
	Variable TagLineLength=31
	String TraceName=StringFromList(0,TraceNameList(GraphName,";",1),";")
	
	//Update tags
	For (i=0;i<dimsize(XPSTagW,0);i+=1)
		If (!StringMatch(XPSTagW[i][0],""))
			TagOrbit=XPSTagW[i][1]
			TagString=XPSTagW[i][0]+TagOrbit
			TagName=cleanupname(TagString,0) //Make name compatible
			If (Stringmatch(XPSTagW[i][3],"Custom")) //Custom 
				TagPos=str2num(XPSTagW[i][2])
				If (!OnTrace_Flg)
					Tag /G=(50000,10000,10000 )/N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=0/Y=(TagLineLength) bottom, TagPos,TagString
				Else
					RandomY=gnoise(1)*10+20
					Tag /G=(50000,10000,10000 )/N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=5/Y=(RandomY) $TraceName, TagPos,TagString
				EndIf
			EndIf
		Else
			Return 0
		EndIF
	EndFor
End

//Function SLP_UTIL_InsertETag(GraphName)
//	String GraphName
//	
//	Wave /T XPSTagW=root:Package_SLP:Util:PT:XPSTagW
//	Variable i=0
//	String TagString=""
//	String TagName=""
//	String TagOrbit=""
//	Variable TagPos=0
//	Variable RandomY=0 
//	
//	String TraceName=StringFromList(0,TraceNameList(GraphName,";",1),";") //First graph
//	
//	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
//	
//	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
//	variable SelRow=V_Value
//	variable hv=str2num(SLP_DXPS_ScanListW[SelRow][17])
//	variable aWF=str2num(SLP_DXPS_ScanListW[SelRow][18])
//	
//	//Update tags
//	For (i=0;i<dimsize(XPSTagW,0);i+=1)
//		If (!StringMatch(XPSTagW[i][0],""))
//			TagOrbit=XPSTagW[i][1]
//			TagString=XPSTagW[i][0]+TagOrbit
//			TagName=cleanupname(TagString,0) //Make name compatible
//			If (!numtype(str2num(TagOrbit[0]))) //BE  - 1s, 2s, 2p3/2... (start with number)
//				TagPos=str2num(XPSTagW[i][2])
//			Else //KE - KLL, LMM .. (start with letter)			 
//				TagPos=hv-aWF-str2num(XPSTagW[i][2])
//			EndIF
//			
//			RandomY=gnoise(1)*10+20
//			Tag /N=$TagName/W=$GraphName /F=0/TL={dash=2} /L=1/C/X=(5)/Y=(RandomY) $TraceName, TagPos,TagString
//		Else
//			Return 0
//		EndIF
//	EndFor
//End

Function CheckProc_DXPS(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
	
	Wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	ControlInfo /W=SLP_DispXPS_Panel_01 List_ScansList
	Variable SelRow=V_Value

	
	switch( cba.eventCode )
		case 2: // mouse up
			strswitch(cba.CtrlName)	// string switch
				case "CheckBox_Show_XPS":		// execute if case matches expression
					SLP_DXPS_ScanListW[SelRow][29]=num2str(cba.checked)
					SLP_DXPS_PT_UpdateTag()
					break
				case "CheckBox_Show_Auger":
					SLP_DXPS_ScanListW[SelRow][30]=num2str(cba.checked)
					SLP_DXPS_PT_UpdateTag()
					break
				case "CheckBox_Show_Custom":
					SLP_DXPS_ScanListW[SelRow][31]=num2str(cba.checked)
					SLP_DXPS_PT_UpdateTag()
					break
			EndSwitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_Util_PT(bs) : ButtonControl
	STRUCT WMButtonAction &bs
	
	String EName=""
	String ButtonName=bs.ctrlname
	Variable AtomicN=0
	Wave /T PT_EList=root:Package_SLP:Util:PT:PT_EList
	
	switch(bs.eventCode)
		case -1:  // being killed
			return 0
		case 1:  // mouse down
			break
		case	2: // mouse up
			SLP_Util_LoadDB()
			EName=bs.ctrlname
			EName=removeending(ButtonName)
			AtomicN=SLP_Util_PT_GetAtomicN(EName)
			if (stringmatch(PT_EList[AtomicN][5],"0"))
				PT_EList[AtomicN][5]="1"
				Button $ButtonName,fColor=(50000,0,0)
			else
				PT_EList[AtomicN][5]="0"
				Button $ButtonName,fColor=(40000,40000,40000)
			endif
			
			If (StringMatch(bs.win,"SLP_DispXPS_Panel_01")) //For DispXPS
				SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
				SLP_Util_PT_GenXPSTag()
				SLP_DXPS_PT_UpdateTag()
			Else //For other uses
				SLP_Util_PT_GenXPSTag()
			EndIF
			
			break
		case 3: //Mouse up outside control
			break
		case 4: // mouse moved
			break
		case 5: // mouse enter
			return 0
		case 6:  // mouse leave
			return 0
	endswitch

	return 0
End

Function Panel_DXPS_CustomELine() : Panel
	PauseUpdate; Silent 1		// building window...
	
	DoWindow /K SLP_UTIL_CustomELine_Panel
	NewPanel /W=(495,150,860,380) /N=SLP_UTIL_CustomELine_Panel
	modifypanel /W=SLP_UTIL_CustomELine_Panel cbRGB=(40000,50000,60000), frameStyle=1
	SetDrawLayer UserBack
	SetDrawEnv fsize= 14
	DrawText 9,26,"Custom energy line in XPS"
	SetDrawEnv save
	
	ListBox list_CustomELine,pos={8,33},size={349,167}
	ListBox list_CustomELine,listWave=root:Package_SLP:Util:PT:CustomEnergyLineW
	ListBox list_CustomELine,selWave=root:Package_SLP:Util:PT:CustomEnergyLineSelW
	ListBox list_CustomELine,mode= 2,selRow= 2
	ListBox list_CustomELine,widths={37,118,51,194,250,250,250,250}
	ListBox list_CustomELine,userColumnResize= 1,proc =ListBoxProc_UTIL_CustomELine
	
	Button button_CustomE_done,pos={290,208},size={50,16},proc=ButtonProc_DXPS,title="Done"
	Button button_CustomE_done,fSize=10
EndMacro

Function ListBoxProc_UTIL_CustomELine(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
			SLP_Util_PT_GenXPSTag()
			SLP_DXPS_PT_UpdateTag()
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			SLP_DXPS_RemoveETag("SLP_DispXPS_Panel_01#DX_MERGEDSPECTRA")
			SLP_Util_PT_GenXPSTag()
			SLP_DXPS_PT_UpdateTag()
			break
	endswitch

	return 0
End

function SLP_Util_Split2D(TwoDW_FName)
//Split 2D wave (e.g. TRXPS scan) into 1D waves
	String TwoDW_FName
	Wave TwoDW=$TwoDW_FName
	
	variable N_Scans=dimsize(TwoDW,1)
	
	variable i=0
	String Index_txt=""
	String NewW_FName=""
	
	For (i=0;i<N_Scans;i+=1)
		sprintf Index_txt,"%03d",i
		NewW_FName=TwoDW_FName+"_"+Index_txt
		duplicate /O/r=[ ][i] TwoDW $NewW_FName /WAVE=NewW
		redimension /N=-1 NewW
	EndFor
End

Function SLP_Util_FitMultiGLAs(DataW_FName,N_Peaks,CoefGuessM_FName,ConstraintW_FName)//,LibraryW_FName)
	String DataW_FName
	Variable N_Peaks
	String CoefGuessM_FName
	String ConstraintW_FName
	//String LibraryW_FName
	
	Wave DataW=$DataW_FName
	Wave CoefGuessM=$CoefGuessM_FName
	Wave ConstraintW=$ConstraintW_FName
	
	String ComponentW_FName=""
	String Constraint_txt=""
	String HoldStr=""
	String PAreaW_FName=DataW_FName+"_PArea"
	Make /O/N=(N_peaks) $PAreaW_FName /WAVE=PAreaW
	
//	Make /O/N=(N_peaks,5) GLA_coef_M
//	GLA_coef_M=0
	
	Make /T/O/N=0 FitConstraintW
	
	Variable i=0
	Variable j=0
	Variable k=0
	Variable m=0
	String CoefList=""
	String CoefW_Name=""
	String Index_str=""
	//String Fit_str="FuncFit /Q/W=2/NTHR=0/TBOX=768 {"
	//String Fit_str="FuncFit /Q/W=2/NTHR=0 {"
	String Fit_str="FuncFit /W=2/NTHR=0 {"

	For (i=0;i<N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		CoefW_Name="CoefW_"+Index_str
		Make /O/N=5 $CoefW_Name /Wave=CoefW
		CoefW[]=CoefGuessM[i][p]
		
		//Hold String
		HoldStr=num2str(ConstraintW[0][2][i])+num2str(ConstraintW[1][2][i])+num2str(ConstraintW[2][2][i])+num2str(ConstraintW[3][2][i])+num2str(ConstraintW[4][2][i])

		Fit_str+="{SLP_FitFunc_GLA,"+CoefW_Name+",HOLD=\""+HoldStr+"\"},"		
		
		//Constraints
		For (j=0;j<5;j+=1) //Parameters: Int,Pos,FWHM,Mix,As
			If (!Numtype(ConstraintW[j][0][i]) && !(ConstraintW[j][2][i])) //If HOLD, don't put constraint!
				Constraint_txt="K"+num2str(k)+">="+num2str(ConstraintW[j][0])
				redimension /N=(dimsize(FitConstraintW,0)+1,dimsize(FitConstraintW,1)) FitConstraintW
				FitConstraintW[m]=Constraint_txt
				m+=1
			EndIf
			If (!Numtype(ConstraintW[j][1][i]) && !(ConstraintW[j][2][i])) //If HOLD, don't put constraint!
				Constraint_txt="K"+num2str(k)+"<="+num2str(ConstraintW[j][1])
				redimension /N=(dimsize(FitConstraintW,0)+1,dimsize(FitConstraintW,1)) FitConstraintW
				FitConstraintW[m]=Constraint_txt
				m+=1
			EndIf
			k+=1
		EndFor
		
	EndFor
	Fit_str=RemoveEnding(Fit_str)
	Fit_str+="} "+DataW_FName+" /D"+" /C=FitConstraintW"
	
	DoUpdate
	
//FuncFit /Q/W=2/NTHR=0/TBOX=768 {{SLP_StrightLine,BG_Coef,HOLD=HoldStr_BG},{SLP_FitFunc_InvGLA,GLA1_coef,HOLD=HoldStr_GLA1},{SLP_FitFunc_InvGLA,GLA2_coef,HOLD=HoldStr_GLA2},{SLP_FitFunc_InvGLA,GLA3_coef,HOLD=HoldStr_GLA3}}  ZProfW  /D=$FitZProfW_FName /M=ZProfMskW /C=$FitCoefConstraintsW_FName
	Print Fit_str
	Execute Fit_str
	
	For (i=0;i<N_Peaks;i+=1)
		sprintf Index_str,"%02d",i
		CoefW_Name="CoefW_"+Index_str
		wave CoefW=$CoefW_Name
		ComponentW_FName=DataW_FName+"_"+index_str
		duplicate /O DataW,$ComponentW_FName /Wave=ComponentW
		
		ComponentW=SLP_Func_GLA(CoefW[0],CoefW[1],CoefW[2],CoefW[3],CoefW[4],x)
		
		//appendtograph ComponentW
		
		PAreaW[i]=area(ComponentW)
	
	EndFor
	

End

Function ButtonProc_DXPSExp_Ok(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_DXPS_ExportSelected()
			Dowindow /K DXPS_ExportGraph
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function /S SLP_Util_WNameSuggest(WName,Alert_Flg,length_Limit)
	//The function correct the non-standard wave names to standard ones.
	//Alert_Flg=1 => Warn with a pop-up message when error occurs
	//The function return a string containing the suggested name.
	//The suggested name is also stored in a global variable in the package folder
	//Error checking done by [CODE: SLP_Util_WNameCheck] 
	string WName
	variable Alert_Flg
	variable length_Limit
	
	SVAR WNameSuggestion=root:Package_SLP:Util:WNameSuggest:WNameSuggestion
	
	variable Error_Code=SLP_Util_WNameCheck(WName,length_Limit)
	string Error_Code_Bin=""
	string Error_Message=""
	
	SPrintf  Error_Code_Bin,"%03b",Error_Code //Convert to binary string
	//print Error_Code_Bin
	//Bit0 = Length error, bit1 = First character error, bit2 = Special character error
	string Suggested_WName=WName
	
	If (stringmatch(Error_Code_Bin[1],"1"))
		Suggested_WName[0]="W_"
		//Print "Start with non-alphabet character"
		Error_Message+="- Start with non-alphabet character\r"
	EndIF
	
	variable i=0
	variable CharNum=0
	variable SpecialCharError_Flg=0
	
	If (stringmatch(Error_Code_Bin[2],"1"))
		Error_Message+="- Use special character(s)\r"
		//Check for the wrong characters and remove them (incl. blank space)
		For (i=0;i<strlen(Suggested_WName);i+=1)
			CharNum=char2num(Suggested_WName[i])
			SpecialCharError_Flg=!((CharNum>=65&&CharNum<=90)||(CharNum>=97&&CharNum<=122)||(CharNum>=48&&CharNum<=57)||(CharNum==95))
			If (SpecialCharError_Flg)
				Suggested_WName=Suggested_WName[0,i-1]+Suggested_WName[i+1,strlen(Suggested_WName)] //Remove the wrong character
				i-=1 //Reduce index by 1 (since the character has been removed)
			Endif
		EndFor
	EndIf
	
	If (stringmatch(Error_Code_Bin[0],"1"))
		Suggested_WName=Suggested_WName[0,30]
		Error_Message+="- Wave name too long.\r"
	EndIF
	
	//Print "Suggested wave name: "+Suggested_WName
	
	If (!stringmatch(Error_Message,"")&&Alert_Flg)
		//Error_Message="Wave name alert:\r"+Error_Message+"Original wave name: "+WName+"\r"+"Suggested wave name: "+Suggested_WName
		Error_Message="Wave name alert:\r"+Error_Message+"Suggested wave name: "+Suggested_WName
		DoAlert /T="Wave name alert" 0,Error_Message
	Endif
	
	WNameSuggestion=Suggested_WName
	
	Return Suggested_WName
End

Function SLP_Util_WNameCheck(WName,length_Limit)
	//To become obsolete. Igor already has built-in function to check and suggest name
	string WName
	variable length_Limit //For usage flexibility - sometimes subsequent procedures may add a tag to the user's input WaveName text, making it even longer.
	
	//THE IGOR (standard) WAVE NAME MUST FOLLOW:
		//31-character limit
		//Must start with alphabetic characters
		//May contain numeric and underscore
		//Must not contain other special characters or space
		//Case insensitive
	//(Avoid 'liberal' name)
	
	//Check the number of characters (must be <=31)
	variable NameLengthErr_Flg=0
	variable WName_length=strlen(WName)
	If (WName_length>length_Limit)
		NameLengthErr_Flg=1
	Endif
	
	variable i=0
	//Check whether the first character is an alphabet
	variable CharNum=char2num(WName[0])
	variable FirstCharError_Flg=0
	FirstCharError_Flg=!((CharNum>=65&&CharNum<=90)||(CharNum>=97&&CharNum<=122))

	//Check whether there are any special characters or space
	variable SpecialCharError_Flg=0
	For (i=0;i<WName_length;i+=1)
		CharNum=char2num(WName[i])
		SpecialCharError_Flg=!((CharNum>=65&&CharNum<=90)||(CharNum>=97&&CharNum<=122)||(CharNum>=48&&CharNum<=57)||(CharNum==95))
		If (SpecialCharError_Flg)
			Break
		Endif
	EndFor
	//Print "Name length error: "+num2str(NameLengthErr_Flg)
	//Print "First character error "+num2str(FirstCharError_Flg)
	//Print "Special character error"+num2str(SpecialCharError_Flg)
	
	return 2^2*NameLengthErr_Flg+2^1*FirstCharError_Flg+2^0*SpecialCharError_Flg
	//The return code has bit0 = Length error, bit1 = First character error, bit2 = Special character error
End

///From other sources//

Function MDsort(w,keycol, [reversed])
//Sort 2d wave items by selected column
//Copied from http://www.igorexchange.com/node/599
	Wave w
	variable keycol, reversed
 
	variable type
 
	type = Wavetype(w)
 
	make/Y=(type)/free/n=(dimsize(w,0)) key
	make/free/n=(dimsize(w,0)) valindex
 
	if(type == 0)
		Wave/t indirectSource = w
		Wave/t output = key
		output[] = indirectSource[p][keycol]
	else
		Wave indirectSource2 = w
		multithread key[] = indirectSource2[p][keycol]
 	endif
 
	valindex=p
 	if(reversed)
 		sort/a/r key,key,valindex
 	else
		sort/a key,key,valindex
 	endif
 
	if(type == 0)
		duplicate/free indirectSource, M_newtoInsert
		Wave/t output = M_newtoInsert
	 	output[][] = indirectSource[valindex[p]][q]
	 	indirectSource = output
	else
		duplicate/free indirectSource2, M_newtoInsert
	 	multithread M_newtoinsert[][] = indirectSource2[valindex[p]][q]
		multithread indirectSource2 = M_newtoinsert
 	endif 
End

///Probably not used////

Function SLP_InitProgram()
	string slp_Current_folder=getdatafolder(1)
	newdatafolder /O root:Package_SLP
	newdatafolder /O root:Package_SLP:Saved
	
	//SET folder to Package_SLP
	
	setdatafolder root:Package_SLP
	variable /G Init_XPS_flg=1
	variable /G DataSetListWaveSel=0
	string /G CurrentImageName=""
	string /G CurrentLPName=""
	string /G Image_Location=""
	string /G SLP_ImageName=""
	string /G Image_Location=""
	variable /G SLP_LPWidth=10
	make /O/T root:Package_SLP:SLP_DataSetListWave 
	make /O/T root:Package_SLP:SLP_LPListWave
	make /O root:Package_SLP:SLP_xWave
	make /O root:Package_SLP:SLP_yWave
	make /O root:Package_SLP:SLP_W_Int_vs_Time
	
	variable /G LP_ext_flg=0
	variable /G Overwrite_flg=0
	variable /G Recall_Dataset_Sel
	
	variable N_Params=6 //Number of scan parameters
	
	make /O/N=(N_Params,3) /T root:Package_SLP:SLP_XPS_ScanParam /Wave=SLP_XPS_ScanParam
	make /O/N=(N_Params,3) root:Package_SLP:SLP_XPS_ScanParamSel /Wave=SLP_XPS_ScanParamSel

	make /O/T/N=(128,5) root:Package_SLP:SLP_SavedDataSets
	variable /G N_SavedDatasets
	string /G List_SavedDataSets

	setdatafolder $slp_Current_folder
	
	SLP_XPS_ScanParam[0][0]="Start Voltage begin"
	SLP_XPS_ScanParam[1][0]="Start Voltage end"
	SLP_XPS_ScanParam[2][0]="Start Voltage step"
	SLP_XPS_ScanParam[3][0]="Photon energy"
	SLP_XPS_ScanParam[4][0]="Analyser workfunction"
	SLP_XPS_ScanParam[5][0]="Energy dispersion"
	
	SLP_XPS_ScanParam[0][2]="eV"
	SLP_XPS_ScanParam[1][2]="eV"
	SLP_XPS_ScanParam[2][2]="eV"
	SLP_XPS_ScanParam[3][2]="eV"
	SLP_XPS_ScanParam[4][2]="eV"
	SLP_XPS_ScanParam[5][2]="eV/pt"
	
	
	//Set SelWave (editable = 2, middle column)
	variable i=0
	For (i=0;i<N_Params;i+=1)
		SLP_XPS_ScanParamSel[i][0]=0
		SLP_XPS_ScanParamSel[i][1]=2
		SLP_XPS_ScanParamSel[i][2]=0
	Endfor
	
End

Function SLP_SaveDataSet(DataSetName)
	string DataSetName
	
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	NVAR N_SavedDataSets=root:Package_SLP:N_SavedDataSets
	SVAR List_SavedDataSets=root:Package_SLP:List_SavedDataSets
	SVAR Image_Location=root:Package_SLP:Image_Location
	Wave /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave
	Wave /T SLP_LPListWave=root:Package_SLP:SLP_LPListWave
	Wave /T SLP_XPS_ScanParam=root:Package_SLP:SLP_XPS_ScanParam
	Wave /T SLP_SavedDataSets=root:Package_SLP:SLP_SavedDataSets
	Wave SLP_W_Int_vs_Time=root:Package_SLP:SLP_W_Int_vs_Time
	NVAR Overwrite_flg=root:Package_SLP:Overwrite_flg
	Wave SLP_xWave=root:Package_SLP:SLP_xWave
	Wave SLP_yWave=root:Package_SLP:SLP_yWave
	
	string slp_Current_folder=getdatafolder(1)
	
	//Check if the input dataset name already exists
	if (whichlistitem(DataSetName,List_SavedDataSets)!=-1)
		 //Ask if user wants to overwrite 
		 SLP_Dataset_save_dialog()	 
		
		 //If not -> exit the function
		 if (Overwrite_flg==0)
		 	return 0
		 Endif
	Endif 
	
	//Create a folder to save dataset
	string new_folder_name="root:Package_SLP:Saved:"+DataSetName
	newdatafolder /O $new_folder_name
	setdatafolder $new_folder_name
	
	duplicate /T/O SLP_DataSetListWave SLP_DataSetListWave_S
	duplicate /T/O SLP_LPListWave SLP_LPListWave_S
	duplicate /T/O SLP_XPS_ScanParam SLP_XPS_ScanParam_S
	duplicate /O SLP_W_Int_vs_Time SLP_W_Int_vs_Time_S
	duplicate /O SLP_xWave SLP_xWave_S
	duplicate /O SLP_yWave SLP_yWave_S
	
	setdatafolder $slp_Current_folder
	
	//Add new item the saved dataset list if it is a new one
	if (Overwrite_flg==0)
		SLP_SavedDataSets[N_SavedDataSets][0]=DataSetName
		SLP_SavedDataSets[N_SavedDataSets][1]=num2str(LP_ext_flg)
		SLP_SavedDataSets[N_SavedDataSets][2]=Image_Location
		
		N_SavedDataSets+=1
		
		//Make a list for datasets
		List_SavedDataSets=AddListItem(DataSetName,List_SavedDataSets,";",999)
			
	Endif
	
	//change the selection to the new one
	PopupMenu PopupMenu_Dataset, value=#"root:Package_SLP:List_SavedDataSets", mode=1+whichlistitem(DataSetName,List_SavedDataSets)		//itemsinlist(List_SavedDataSets)

	//Reset the Overwrite Flag
	Overwrite_flg=0
End

Function SLP_LoadNEXAFS() //slp_filepath)
	//string slp_filepath
	variable refnum
	open /R refnum
	print S_Filename
	
	grep /Q/LIST/E="ROI" S_Filename
	print S_Value
	
 	Loadwave /O/G/D/N=SLP_NEXAFS_data /E=1/K=0/V={"\t,",",",0,1} /L={0,0,0,0,0} S_Path+S_Filename
	//Note: use /G for general text loading /L={0,0,0,0,0,0} for automatic removal of header and footer by Igor.
	
	//print itemsinlist(S_waveNames)
	
	variable slp_NROI= itemsinlist(S_waveNames)-3
	print "No. of ROI(s): "+num2str(slp_NROI)
	
	//string slp_filepath=getdatafolder(1)
	
	//loaddata 
	close refnum


End

function SLP_create_DispXPS_01()
	
	NVAR slp_LPwidth=root:Package_SLP:SLP_LPWidth
	variable /G slp_hv=419 //photon energy (eV)
	variable /G slp_stv=100 //start voltage (eV)
	variable /G slp_Energy_max=20
	variable /G slp_Energy_min=2
	
	wave /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave
	wave /T SLP_LPListWave=root:Package_SLP:SLP_LPListWave
	wave SLP_xWave=root:Package_SLP:SLP_xWave
	wave SLP_yWave=root:Package_SLP:SLP_yWave
	NVAR DataSetListWaveSel=root:Package_SLP:DataSetListWaveSel
	SVAR CurrentImageName=root:Package_SLP:CurrentImageName
	SVAR List_SavedDataSets=root:Package_SLP:List_SavedDataSets
	SVAR SLP_ImageName=root:Package_SLP:SLP_ImageName
	NVAR Init_XPS_flg=root:Package_SLP:Init_XPS_flg
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	
	WAVE SLP_W_Int_vs_Time=root:Package_SLP:SLP_W_Int_vs_Time
	
	DataSetListWaveSel=0
	CurrentImageName=SLP_DataSetListWave[DataSetListWaveSel]
	
	DoWindow/K SLP_DispXPS_01
	Newpanel /W=(200,100,1200,700)/N=SLP_DispXPS_01
	
	TitleBox Title_DispXPS_01 title="\Z14SLRI LEEM PEEM Dispersive XPS Data Extraction",pos={5,5},fSize=11, fstyle=1, frame=0
	
	TitleBox Title_DispXPS_02 title="\Z10Draw profile..",pos={5,255},fSize=11, fstyle=1, frame=0
	
	//BUTTONs
	//Done
	Button button_Done title="Done",pos={700,560}, proc=ButtonProc_Done_SLP_DispXPS_01
	
	Button button_Draw title="Draw",pos={10,270}, size={90,20}, proc=ButtonProc_Draw_SLP_DispXPS_01
	Button button_Edit title="Edit",pos={110,270}, size={90,20}, proc=ButtonProc_Edit_SLP_DispXPS_01
	//Button button_Finish title="Finish",pos={10,330},size={200,20}, proc=ButtonProc_Fin_SLP_DispXPS_01
	Button button_PlotLineProfile title="Plot line profile",pos={10,300},size={190,20}, proc=ButtonProc_Plot_SLP_DispXPS_01
	
	Button button_Load title="Load image series...", pos={10,25}, size={150,20}, proc=ButtonProc_Load_SLP_DispXPS_01
	//Button button_Load title="Extract line profiles", pos={10,25}, size={150,20}, proc=ButtonProc_ExtLP_SLP_DispXPS_01
	
	Button button_save title="Save dataset...", pos={170,25}, size={110,20}, proc=ButtonProc_Save_Dataset
	Button button_recall title="Recall dataset", pos={400,25}, size={120,20},proc=ButtonProc_Recall_Dataset
	Button button_delete title="Delete dateset", pos={530,25}, size={120,20}
	
	Button button_Plot_Ivt title="Plot intensity vs. frame..", pos={660,25}, size={180,20}, proc=ButtonProc_Plot_Ivt
	
	//Pop-up Menu
	
	PopupMenu PopupMenu_Dataset, value=#"root:Package_SLP:List_SavedDataSets", pos={290,25}, proc=PopMenuProc
	
	//SETVAR
	SetVariable setvar_LPWidth title="Line profile width",pos={40,330},size={100,20}, bodywidth=50, limits={0,inf,1}, value=slp_LPwidth,proc=SetVarProc_LPWidth_SLP_dXPS2
	
	//DISPLAY AREA
	Display /HOST=SLP_DispXPS_01 /N=Image_SLP_DispXPS_01 /W=(220,50,620,430)
	
	Display /HOST=SLP_DispXPS_01 /N=Image_SLP_DispXPS_02 /W=(220,450,620,590)
	//ModifyGraph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 margin(left)=32,margin(bottom)=28,margin(right)=5,margin(top)=5
	
	Display /HOST=SLP_DispXPS_01 /N=Image_SLP_DispXPS_03 /W=(640,50,980,250)
	appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_03 SLP_W_Int_vs_Time
	SLP_Util_FormatXPS(slp_GraphName="SLP_DispXPS_01#Image_SLP_DispXPS_03")
	
	//LIST of waves
	//LISTBOX
	wave /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave 
	ListBox List_Spectra listWave=SLP_DataSetListWave, size={200,200}, pos={5,50}, frame=2,mode=2,proc=ListBoxProc_Img_List
	
	wave /T SLP_XPS_ScanParam=root:Package_SLP:SLP_XPS_ScanParam
	wave /T SLP_XPS_ScanParamSel=root:Package_SLP:SLP_XPS_ScanParamSel
	ListBox List_XPSParam listWave=SLP_XPS_ScanParam, selWave=SLP_XPS_ScanParamSel,editstyle=1,mode=0,widths={110,40,30}, size={200,200}, pos={640,260}, frame=2,mode=2//,proc=ListBoxProc_Img_List
	
	//Showing data
	slp_imageName=SLP_DataSetListWave[0]
	
	//If the program was restarted within Igor, check whether the old data already exist
	if (Init_XPS_flg!=1)
		
		SLP_PLotImage(slp_ImageName)
		//Appendimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $slp_imageName
		//ModifyImage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $slp_imageName ctab= {*,*,Terrain,0}
		ModifyGraph /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 minor=1,fSize=7,lblRot=0,tkLblRot(left)=90,btLen=4,stLen=2
		SetAxis/W=SLP_DispXPS_01#Image_SLP_DispXPS_01 /A/R left
		
		if (LP_ext_flg==1)
			SLP_Plot_LP(SLP_LPListWave[0])
			appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 SLP_yWave vs SLP_xWave
		Endif
		
	Else
		//Init_XPS_flg=0
	Endif
	
		
	CurrentImageName=slp_imageName
	
End

Function PopMenuProc(pa) : PopupMenuControl
	STRUCT WMPopupAction &pa
	NVAR Recall_Dataset_Sel=root:Package_SLP:Recall_Dataset_Sel

	switch( pa.eventCode )
		case 2: // mouse up
			Variable popNum = pa.popNum
			String popStr = pa.popStr
			
			Recall_Dataset_Sel=pa.popNum-1
			
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_Recall_Dataset(Dataset_folder_name)
	string Dataset_folder_name
	
	
	
	string slp_Current_folder=getdatafolder(1)
	setdatafolder root:Package_SLP
	
	string Dataset_folder_path="root:Package_SLP:Saved:"+Dataset_folder_name
	string Dataset_full_path1=Dataset_folder_path+":SLP_DataSetListWave_S"
	string Dataset_full_path2=Dataset_folder_path+":SLP_LPListWave_S"
	string Dataset_full_path3=Dataset_folder_path+":SLP_XPS_ScanParam_S"
	string Dataset_full_path4=Dataset_folder_path+":SLP_W_Int_vs_Time_S"
	string Dataset_full_path5=Dataset_folder_path+":SLP_xWave_S"
	string Dataset_full_path6=Dataset_folder_path+":SLP_yWave_S"
	Duplicate /O/T $Dataset_full_path1, SLP_DataSetListWave
	Duplicate /O $Dataset_full_path2, SLP_LPListWave
	Duplicate /O/T $Dataset_full_path3, SLP_XPS_ScanParam
	Duplicate /O $Dataset_full_path4, SLP_W_Int_vs_Time
	Duplicate /O $Dataset_full_path5 SLP_xWave
	Duplicate /O $Dataset_full_path6 SLP_yWave
	
	setdatafolder $slp_Current_folder
	
	//Select the first item in the listbox
	
	ListBox List_Spectra selrow=0
	
End


Function ButtonProc_Recall_Dataset(ba) : ButtonControl
	STRUCT WMButtonAction &ba	
	
	SVAR List_SavedDataSets=root:Package_SLP:List_SavedDataSets
	NVAR Recall_Dataset_Sel=root:Package_SLP:Recall_Dataset_Sel
	WAVE /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave
	WAVE /T SLP_SavedDataSets=root:Package_SLP:SLP_SavedDataSets
	Wave /T SLP_LPListWave=root:Package_SLP:SLP_LPListWave
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	Wave SLP_xWave=root:Package_SLP:SLP_xWave
	Wave SLP_yWave=root:Package_SLP:SLP_yWave
	
	SVAR Image_Location=root:Package_SLP:Image_Location
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			if (LP_ext_flg==1)
				removefromgraph /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 SLP_yWave
			Endif
			
			string Dataset_folder_name=stringfromlist(Recall_Dataset_Sel,List_SavedDataSets)
			LP_ext_flg=str2num(SLP_SavedDataSets[Recall_Dataset_Sel][1])
			SLP_Recall_Dataset(Dataset_folder_name)
			
			Image_Location=SLP_SavedDataSets[Recall_Dataset_Sel][2]
			
			SLP_PlotImage(SLP_DataSetListWave[0])
			
			if (LP_ext_flg==1)
				//[NOTE] putting back the line
				appendtograph  /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 SLP_yWave vs SLP_xWave
				//Plot the line profile
				SLP_Plot_LP(SLP_LPListWave[0])
			Endif
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Save_Dataset(ba) : ButtonControl
	STRUCT WMButtonAction &ba	
	
	SVAR List_SavedDataSets=root:Package_SLP:List_SavedDataSets
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			string SLP_Dataset_name=""
			prompt SLP_Dataset_name,"Dataset name"
			doprompt "", SLP_Dataset_name
			
			SLP_SaveDataSet(SLP_Dataset_name)
			
			// a weird way of igor to use the list menu..
			//String quote = "\""
			//String list
			//if (CmpStr(IgorInfo(2),"Windows") == 0)
			//	list = quote + List_SavedDataSets + quote
			//else
			//	list = quote + List_SavedDataSets+ quote
			//endif
			//PopupMenu PopupMenu_Dataset, value=#list
			
			
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Plot_Ivt(ba) : ButtonControl
	STRUCT WMButtonAction &ba	
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			string ivt_Trace_Name=""
			prompt ivt_Trace_Name,"Intensity vs. time trace Name"
			doprompt "", ivt_Trace_Name
			
			wave SLP_W_Int_vs_Time=root:Package_SLP:SLP_W_Int_vs_Time
			duplicate /O SLP_W_Int_vs_Time $ivt_Trace_Name /WAVE=ivt_Plot
			Display ivt_Plot
			SLP_Util_FormatXPS()
			legend
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Draw_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba	
	
	//Wave SLP_xWave=root:Package_SLP:SLP_xWave
	//Wave SLP_yWave=root:Package_SLP:SLP_yWave
	
	//string xWave_nme="root:Package_SLP:SLP_xWave"
	//string yWave_nme="root:Package_SLP:SLP_yWave"
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			//Draw the line
			//wave slp_ywave=root:Package_SLP:slp_ywave
			//wave slp_xwave=root:Package_SLP:slp_xwave
			
			//graphwavedraw /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 /O SLP_yWave_tmp,SLP_xWave_tmp
			//duplicate SLP_xWave_tmp, $xWave_nme
			//duplicate SLP_yWave_tmp, $yWave_nme
			//killwaves SLP_xWave_tmp,SLP_yWave_tmp
			string slp_Current_folder=getdatafolder(1)
			setdatafolder root:Package_SLP
			graphwavedraw /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 /O SLP_yWave,SLP_xWave
			setdatafolder $slp_Current_folder
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Edit_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			//Draw the line
			//wave ce_ywave
			//graphwaveedit /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 ce_ywave
			
			string slp_Current_folder=getdatafolder(1)
			setdatafolder root:Package_SLP
			graphwaveedit /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 SLP_yWave
			setdatafolder $slp_Current_folder
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Fin_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	wave SLP_W_Int_vs_Time=root:Package_SLP:SLP_W_Int_vs_Time
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			//Draw the line
			
			graphnormal /W=SLP_DispXPS_01#Image_SLP_DispXPS_01
			SLP_Int_vs_Time()
			
			//Check whether the trace is already there
			variable slp_Trace_exist=itemsinlist(tracenamelist("SLP_DispXPS_01#Image_SLP_DispXPS_03",";",1))
			//Add the Int_vs_time wave if the plot is blank
			If (!slp_Trace_exist)
				appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_03 SLP_W_Int_vs_Time
				 SLP_Util_FormatXPS(slp_GraphName="SLP_DispXPS_01#Image_SLP_DispXPS_03")
			Endif
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Plot_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	SVAR slp_imageName=root:Package_SLP:SLP_ImageName
	NVAR slp_LPwidth=root:Package_SLP:SLP_LPWidth
	wave SLP_xWave=root:Package_SLP:slp_xwave
	wave SLP_yWave=root:Package_SLP:slp_ywave
	wave /T SLP_LPListWave=root:Package_SLP:SLP_LPListWave
	NVAR DataSetListWaveSel=root:Package_SLP:DataSetListWaveSel
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			//Draw the line
			
			SLP_create_LP_all()
			LP_ext_flg=1
			
			string SLP_LP_nme=""
			SLP_LP_nme=SLP_LPListWave[DataSetListWaveSel]
			//Appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 $SLP_LP_nme
			SLP_Plot_LP(SLP_LP_nme)
			
			
			SLP_Int_vs_Time()
			
			graphnormal /W=SLP_DispXPS_01#Image_SLP_DispXPS_01
			
			//wave LP_Image=$slp_imageName
			//ImageLineProfile/SC srcWave=LP_Image, xWave=ce_xwave, yWave=ce_ywave, width=slp_LPwidth
			//wave W_ImageLineProfile
			//Appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 W_ImageLineProfile
			
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function SLP_create_LP_all()
	SVAR slp_imageName=root:Package_SLP:SLP_ImageName
	NVAR slp_LPwidth=root:Package_SLP:SLP_LPWidth
	SVAR Image_Location=root:Package_SLP:Image_Location
	wave SLP_xWave=root:Package_SLP:slp_xwave
	wave SLP_yWave=root:Package_SLP:slp_ywave
	wave /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave
	wave /T SLP_LPListwave=root:Package_SLP:SLP_LPListWave
	NVAR DataSetListWaveSel=root:Package_SLP:DataSetListWaveSel
	SVAR CurrentImageName=root:Package_SLP:CurrentImageName
	string slp_LP_nme=""
	string SLP_LP_FullName=""
	string SLP_Image_FullName=""
	
	
	variable i=0
	For (i=0;i<dimsize(SLP_DataSetListWave,0);i+=1)
			slp_imageName=SLP_DataSetListWave[i]
			
			slp_LP_nme="LP_"+slp_imageName
			SLP_LP_FullName=Image_Location+":"+slp_LP_nme
			SLP_Image_FullName=Image_Location+":"+slp_imageName
			
			SLP_LPListwave[i]=slp_LP_nme
			wave LP_Image=$SLP_Image_FullName
			ImageLineProfile/SC srcWave=LP_Image, xWave=SLP_xwave, yWave=SLP_ywave, width=slp_LPwidth
			wave W_ImageLineProfile
			duplicate /O W_ImageLineProfile, $SLP_LP_FullName
	
	Endfor
	
	
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	LP_ext_flg=1
End

Function ButtonProc_Done_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K SLP_DispXPS_01
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function ButtonProc_Load_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	NVAR Init_XPS_flg=root:Package_SLP:Init_XPS_flg
	WAVE /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave
	NVAR DataSetListWaveSel=root:Package_SLP:DataSetListWaveSel
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	SVAR SLP_ImageName=root:Package_SLP:SLP_ImageName
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_Load_mult_Img()
			
			Init_XPS_flg=0
			DataSetListWaveSel=0
			LP_ext_flg=0
			
			ListBox List_Spectra selrow=0
			
			SLP_ImageName=SLP_DataSetListWave[DataSetListWaveSel]
			
			SLP_PlotImage(slp_imageName)
			
			//Appendimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $slp_imageName
			//ModifyImage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $slp_imageName ctab= {*,*,Terrain,0}
			//ModifyGraph /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 minor=1,fSize=7,lblRot=0,tkLblRot(left)=90,btLen=4,stLen=2
			//SetAxis/W=SLP_DispXPS_01#Image_SLP_DispXPS_01 /A/R left
			
			
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function SetVarProc_LPWidth_SLP_dXPS(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva
	NVAR slp_LPwidth=root:Package_SLP:SLP_LPWidth
	SVAR slp_imageName=root:Package_SLP:SLP_ImageName
	wave SLP_xWave=root:Package_SLP:slp_xwave
	wave SLP_yWave=root:Package_SLP:slp_ywave
	

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			//String sval = sva.sval
			wave LP_Image=$slp_imageName
			ImageLineProfile/SC srcWave=LP_Image, xWave=SLP_xwave, yWave=SLP_ywave, width=slp_LPwidth
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_LPWidth_SLP_dXPS2(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva
	NVAR slp_LPwidth=root:Package_SLP:slp_LPwidth
	SVAR slp_imageName=root:Package_SLP:slp_ImageName
	wave SLP_xWave=root:Package_SLP:slp_xwave
	wave SLP_yWave=root:Package_SLP:slp_ywave
	

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			//String sval = sva.sval
			wave LP_Image=$slp_imageName
			//ImageLineProfile/SC srcWave=LP_Image, xWave=SLP_xwave, yWave=SLP_ywave, width=slp_LPwidth
			
			SLP_create_LP_all()
			
			SLP_Int_vs_Time()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End



Function SLP_Load_mult_Img()
	
	string slp_basename
	SVAR Image_Location=root:Package_SLP:Image_Location
	
	//Ask the user to identify a folder on the computer
	getfilefolderinfo/D
	
	newpath/O ce_ImagePath S_path
	
	slp_basename=StringFromList(Itemsinlist(S_path,":")-1, S_path ,":")
	
	wave /T SLP_XPS_ScanParam=root:Package_SLP:SLP_XPS_ScanParam
	variable SLP_hv=str2num(SLP_XPS_ScanParam[3][1])
	variable SLP_wf=str2num(SLP_XPS_ScanParam[4][1])
	variable SLP_STV_st=str2num(SLP_XPS_ScanParam[0][1])
	variable SLP_STV_step=str2num(SLP_XPS_ScanParam[2][1])
	
	prompt slp_basename,"Base name of the image waves"
	prompt SLP_hv,"Photon energy (eV)"
	prompt SLP_STV_st,"Start Voltage begin (eV)"
	prompt SLP_STV_step,"Start Voltage step (eV)"
	doprompt "Enter parameters:", slp_basename, SLP_hv,SLP_STV_st,SLP_STV_step
	
	SLP_XPS_ScanParam[3][1]=num2str(SLP_hv)
	SLP_XPS_ScanParam[4][1]=num2str(SLP_wf)
	SLP_XPS_ScanParam[0][1]=num2str(SLP_STV_st)
	SLP_XPS_ScanParam[2][1]=num2str(SLP_STV_step)
	
	
	
	string ImageWaveBaseName="SLP_"+slp_basename
	//ImageWaveBaseName="I06_"+ImageWaveName
	
	string filelist=indexedfile(ce_ImagePath,-1,".tif")
	filelist=sortlist(filelist)
	//print filelist
	
	variable i=0
	string ImageWaveName=""
	string ImageWaveNameTemp=""
	string image_No=""
	variable N_images=itemsinlist(filelist)
	
	make /O /T /N=(N_images) root:Package_SLP:SLP_DataSetListWave /WAVE=SLP_DataSetListWave
	make /O /T /N=(N_images) root:Package_SLP:SLP_LPListWave
	
	string slp_Current_folder=getdatafolder(1)
	
	//SET folder to Package_SLP
	
	NewDataFolder /O $slp_basename
	
	Image_Location=slp_Current_folder+slp_basename
	
	setdatafolder $Image_Location
	
	for (i=0;i<itemsinlist(filelist);i+=1)
		If (i<10)
			image_No="000"+num2str(i)
		Elseif (i<100)
			image_No="00"+num2str(i)
		Elseif (i<1000)
			image_No="0"+num2str(i)
		Endif
		
		imageload /T=tiff /P=ce_ImagePath stringfromlist(i,filelist)
		ImageWaveName=ImageWaveBaseName+"_"+image_No
		//Print S_WaveNames
		//Print ImageWaveName
		
		//Store wave names in SLP_DataSetListWave in the package folder
		SLP_DataSetListWave[i]=ImageWaveName
		
		
		ImageWaveNameTemp=stringfromlist(0,S_WaveNames)
		wave ce_imageload_temp=$ImageWaveNameTemp
		Duplicate /O ce_imageload_temp, $ImageWaveName
		killwaves ce_imageload_temp
		
	Endfor

	setdatafolder slp_Current_folder
End

Function SLP_PlotImage(ImageName)
	string ImageName
	SVAR CurrentImageName=root:Package_SLP:CurrentImageName
	SVAR Image_Location=root:Package_SLP:Image_Location
	//Check whether the plot is blank
	variable N_images=itemsinlist(ImageNameList("SLP_DispXPS_01#Image_SLP_DispXPS_01",";"))
	
	string FullImageName=Image_Location+":"+ImageName
	
	If (N_images!=0)
	
		Appendimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $FullImageName;delayupdate
		ModifyImage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $ImageName ctab= {45,90,Terrain,0};delayupdate
		removeimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $CurrentImageName
	Else
		Appendimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $FullImageName;delayupdate
		ModifyImage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $ImageName ctab= {45,90,Terrain,0};delayupdate
	Endif
	
	CurrentImageName=ImageName

End

Function SLP_PLot_LP(TraceName)
	string TraceName
	SVAR CurrentLPName=root:Package_SLP:CurrentLPName
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	SVAR Image_Location=root:Package_SLP:Image_Location
	
	//Check whether the plot is blank
	variable N_traces=itemsinlist(TraceNameList("SLP_DispXPS_01#Image_SLP_DispXPS_02",";",1))
	string FullLPName=""
	
	If (LP_ext_flg==1)
		FullLPName=Image_Location+":"+TraceName
		If (N_traces!=0)	
			Appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 $FullLPName;delayupdate
			removefromgraph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 $CurrentLPName
		Else
			Appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 $FullLPName;delayupdate
		Endif
	Endif
	
	CurrentLPName=TraceName
	
End

Function ListBoxProc_Img_List(lba) : ListBoxControl
	STRUCT WMListboxAction &lba
	
	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave
	
	
	wave /T SLP_DataSetListWave=root:Package_SLP:SLP_DataSetListWave
	wave /T SLP_LPListWave=root:Package_SLP:SLP_LPListWave
	NVAR DataSetListWaveSel=root:Package_SLP:DataSetListWaveSel //i.e. previous row selection
	SVAR CurrentImageName=root:Package_SLP:CurrentImageName
	SVAR CurrentLPName=root:Package_SLP:CurrentLPName
	SVAR Image_Location=root:Package_SLP:Image_Location
	NVAR LP_ext_flg=root:Package_SLP:LP_ext_flg
	if (row!=-1)
		string slp_imagename=SLP_DataSetListWave[row]
		string slp_LP_nme=SLP_LPListWave[row]
		string slp_prev_LP_nme=SLP_LPListWave[DataSetListWaveSel]
		string slp_Full_ImageName=Image_Location+":"+slp_imagename
		string slp_Full_LP_nme=Image_Location+":"+slp_LP_nme
	
		switch( lba.eventCode )
			case -1: // control being killed
				break
			case 4: // mouse down
				
				SLP_PlotImage(SLP_DataSetListWave[row])
				
				//Appendimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $slp_imageName;delayupdate
				//ModifyImage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $slp_imageName ctab= {45,90,Terrain,0};delayupdate
				//removeimage /W=SLP_DispXPS_01#Image_SLP_DispXPS_01 $CurrentImageName
				
				if (LP_ext_flg==1)
					
					SLP_Plot_LP(SLP_LPListWave[row])
					
					//Appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 $slp_Full_LP_nme
					//removefromgraph /W=SLP_DispXPS_01#Image_SLP_DispXPS_02 $slp_prev_LP_nme
					//CurrentLPName=slp_LP_nme
				Endif
				
				//Update indices to the new row
				DataSetListWaveSel=row
				CurrentImageName=slp_imageName
				
				
	
			
				break
				
			case 3: // double click
				break
			//case 4: // cell selection
			case 5: // cell selection plus shift key
				break
			case 6: // begin edit
				break
			case 7: // finish edit
				break
			case 13: // checkbox clicked (Igor 6.2 or later)
				break
		endswitch
	
	endif
	
	return 0
End



Function ButtonProc_ExtLP_SLP_DispXPS_01(ba) : ButtonControl
	STRUCT WMButtonAction &ba
	wave SLP_W_Int_vs_Time=root:Package_SLP:SLP_W_Int_vs_Time
	
	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			SLP_create_LP_all()
			
			
			graphnormal /W=SLP_DispXPS_01#Image_SLP_DispXPS_01
			SLP_Int_vs_Time()
			
			
			//Check whether the trace is already there
			//variable slp_Trace_exist=itemsinlist(tracenamelist("SLP_DispXPS_01#Image_SLP_DispXPS_03",";",1))
			//Add the Int_vs_time wave if the plot is blank
			//If (!slp_Trace_exist)
			//	appendtograph /W=SLP_DispXPS_01#Image_SLP_DispXPS_03 SLP_W_Int_vs_Time
			//	 SLP_Util_FormatXPS(slp_GraphName="SLP_DispXPS_01#Image_SLP_DispXPS_03")
			//Endif
			
			
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End

Function SLP_Int_vs_Time()
	wave /T SLP_LPListWave=root:Package_SLP:SLP_LPListWave
	wave /T SLP_XPS_ScanParam=root:Package_SLP:SLP_XPS_ScanParam
	variable N_LPwaves=dimsize(SLP_LPListWave,0)
	variable i=0
	
	SVAR Image_Location=root:Package_SLP:Image_Location
	
	make /O /N=(N_LPwaves) root:Package_SLP:SLP_W_Int_vs_Time /WAVE=SLP_W_Int_vs_Time
	
	SLP_W_Int_vs_Time=0
	
	String LP_nme=""
	String LP_Full_nme=""
	variable Sum_tmp=0
	
	For (i=0;i<N_LPwaves;i+=1)
		LP_nme=SLP_LPListWave[i]
		LP_Full_nme=Image_Location+":"+LP_nme
		wave LP_tmp=$LP_Full_nme
		Sum_tmp=sum(LP_tmp)
		SLP_W_Int_vs_Time[i]=Sum_tmp
	
	Endfor
	//display SLP_W_Int_vs_Time
	
	//SET SCALE by using XPS parameters
	variable SLP_hv=str2num(SLP_XPS_ScanParam[3][1])
	variable SLP_wf=str2num(SLP_XPS_ScanParam[4][1])
	variable SLP_STV_st=str2num(SLP_XPS_ScanParam[0][1])
	variable SLP_STV_step=str2num(SLP_XPS_ScanParam[2][1])
	
	setscale /P x (SLP_hv-SLP_STV_st),(SLP_STV_step*-1),"", SLP_W_Int_vs_Time
	

End

Function SLP_Util_FormatXPS([slp_GraphName]) //To use the optional arguments -> SLP_Util_FormatXPS(slp_GraphName="GraphX")
	string slp_GraphName
	//print exists(slp_GraphName)
	
	if (!ParamIsDefault(slp_GraphName)) //ParamIsDefault checks whether user use the optional arguments)
		setaxis  /W=$slp_GraphName /A/R bottom
		ModifyGraph /W=$slp_GraphName  tick=2,mirror=1
		Label  /W=$slp_GraphName bottom "Binding energy"
		Label  /W=$slp_GraphName left "Intensity (a.u.)"
		Legend
	Else
		setaxis  /A/R bottom
		ModifyGraph  tick=2,mirror=1
		Label  bottom "Binding energy"
		Label  left "Intensity (a.u.)"
		//Legend
	Endif

End

Function SLP_Dataset_save_dialog()
	NewPanel /W=(50,50,250,140) /N=SLP_Save_dialog
	DrawText 40,30,"Dataset already exists"
	Button button1,pos={10,45},size={80,25},title="Overwrite",proc = Save_dialog_kill1
	Button button2,pos={100,45},size={80,25},title="Cancel",proc = Save_dialog_kill2
	PauseForUser SLP_Save_dialog
End
Function Save_dialog_kill1(ctrlName) : ButtonControl
	String ctrlName
	NVAR Overwrite_flg=root:Package_SLP:Overwrite_flg
	Overwrite_flg=1
	KillWindow SLP_Save_dialog
End
Function Save_dialog_kill2(ctrlName) : ButtonControl
	String ctrlName
	NVAR Overwrite_flg=root:Package_SLP:Overwrite_flg
	Overwrite_flg=0
	KillWindow SLP_Save_dialog
End


//////////////////// ////////////////// //////////////////////////////
/////////////////// // WF EXTRACTION // //////////////////////////////
////////////////// ////////////////// //////////////////////////////

Function SLP_Load_MultImg2Vol()
	
	//Ask the user to identify a folder on the computer
	getfilefolderinfo/D
	newpath/O ce_ImagePath S_path
	
	string SLP_VolName=StringFromList(Itemsinlist(S_path,":")-1, S_path ,":")
	variable SLP_hv
	variable SLP_wf
	variable SLP_STV_st
	variable SLP_STV_step
	
	prompt SLP_VolName,"Name of the volume"
	prompt SLP_hv,"Photon energy (eV)"
	prompt SLP_STV_st,"Start Voltage begin (eV)"
	prompt SLP_STV_step,"Start Voltage step (eV)"
	doprompt "Enter parameters:", SLP_VolName, SLP_hv,SLP_STV_st,SLP_STV_step
	
	
	string filelist=indexedfile(ce_ImagePath,-1,".tif")
	filelist=sortlist(filelist)
	
	variable i=0
	variable N_images=itemsinlist(filelist)
	
	imageload /T=tiff /P=ce_ImagePath stringfromlist(0,filelist)
	string ImageWaveName=stringfromlist(0,S_WaveNames)
	Wave SLP_ImgWave=$ImageWaveName
	string SLP_IntgName=SLP_VolName+"_Intg"
	
	make /O /N=(dimsize(SLP_ImgWave,0),dimsize(SLP_ImgWave,1),N_images) $SLP_VolName /WAVE=SLP_ImgVolume
	
	make /O /N=(dimsize(SLP_ImgWave,0),dimsize(SLP_ImgWave,1)) $SLP_IntgName /WAVE=SLP_ImgIntegrate
	SLP_ImgIntegrate=0
	
	for (i=0;i<itemsinlist(filelist);i+=1)
		
		imageload /T=tiff /P=ce_ImagePath stringfromlist(i,filelist)
		ImageWaveName=stringfromlist(0,S_WaveNames)
		Wave SLP_ImgWave=$ImageWaveName
		
		SLP_ImgVolume[][][i]=SLP_ImgWave[p][q]
		SLP_ImgIntegrate[][]+=SLP_ImgWave[p][q]
		
		killwaves SLP_ImgWave
		
	Endfor
	
	SLP_ImgIntegrate/=i //Average the intensity
	
	SetScale /P z,SLP_STV_st,SLP_STV_step,SLP_ImgVolume
	
End

Function SLP_Extract_ZProfile(Vol_WaveName,Vol_x,Vol_y,Width,stv_st,stv_step)
	string Vol_WaveName
	variable Vol_x,Vol_y
	variable Width
	variable stv_st
	variable stv_step
	
	WAVE Vol_Wave=$Vol_WaveName
	
	make /O /N=(dimsize(Vol_Wave,2)) ZProfile_Wave
	make /O /N=(dimsize(Vol_Wave,2)) ZProfile_Wave_tmp

	
	ZProfile_Wave=0
	
	variable i
	variable j
	variable k=0
	
	For (i=round(Vol_x-Width/2);i<round(Vol_x+Width/2);i+=1)
		For (j=round(Vol_y-Width/2);j<round(Vol_y+Width/2);j+=1)
			if (i>=0&&j>=0)
				ZProfile_Wave_tmp[]=Vol_Wave[i][j][p]
				ZProfile_Wave+=ZProfile_Wave_tmp
				k+=1
			Endif
		EndFor
	EndFor
	
	ZProfile_Wave/=k //Average the intensity
	
	//Set scale for 31.01.2017 data [TODO]
	//setscale /P x,93,-0.05,ZProfile_Wave
	
	//Set scale for WF31 (27.01.2017, ID2019-3)
	//setscale /P x,-1.5,0.05,ZProfile_Wave
	
	//Set scale for WF07 (26.01.2017, ID2019-3)
	setscale /P x,stv_st,stv_step,ZProfile_Wave
	
	//Display ZProfile_Wave
End



Function SLP_Extract_PeakPos(Vol_WaveName,stv_st,stv_step)
	string Vol_WaveName
	variable stv_st,stv_step
	
	variable i=0
	variable j=0
	variable dX=0
	
	variable Scale=5

	WAVE Vol_Wave=$Vol_WaveName
	Wave Bin44_Mask
	Make /O/N=(floor(dimsize(Vol_Wave,0)/Scale),floor(dimsize(Vol_Wave,1)/Scale)) Result_Wave
	
	For (i=0;i<dimsize(Vol_Wave,0);i+=Scale)
		For (j=0;j<dimsize(Vol_Wave,1);j+=Scale)
			If (Bin44_Mask[i][j])
				SLP_Extract_ZProfile(Vol_WaveName,i,j,10,stv_st,stv_step)
				//Wave ZProfile_Wave
				dX=SLP_2GLAs_Fit("ZProfile_Wave")
				Result_Wave[i/scale][j/scale]=dX
			Else
				Result_Wave[i/scale][j/scale]=0
			Endif
		EndFor
	EndFor
	
	NewImage Result_Wave

End

Function SLP_Extract_PeakPos2(Vol_WaveName,Scale,ScrnMask_WName,stv_st,stv_step)
	string Vol_WaveName
	variable Scale
	string ScrnMask_WName
	variable stv_st
	variable stv_step
	
	variable i=0
	variable j=0
	variable dX=0
	
	WAVE Vol_Wave=$Vol_WaveName
	Wave ScrnMask_Wave=$ScrnMask_WName
	SLP_Extract_ZProfile(Vol_WaveName,0,0,1,stv_st,stv_step)
	Wave ZProfile_Wave
	duplicate /O ZProfile_Wave,ZProfile_Mask_Wave
	
	Make /O/N=(floor(dimsize(Vol_Wave,0)/Scale),floor(dimsize(Vol_Wave,1)/Scale)) Result_Wave
	Result_Wave=0
	
	NewImage /N=Cutoff Result_Wave
	ModifyGraph width=400,height=300,margin(right)=100
	string ImageName=stringfromlist(0,ImageNameList("Cutoff", ";" ))
	ModifyImage /W=Cutoff $ImageName ctab= {dimoffset(ZProfile_Wave,0),dimoffset(ZProfile_Wave,0)+dimdelta(ZProfile_Wave,0)*dimsize(ZProfile_Wave,0),Rainbow,0}
	ColorScale/C/N=text0/X=-20.00/Y=5.00
	
	variable ZProfile_PeakPos=0
	
	For (i=0;i<dimsize(Vol_Wave,0);i+=Scale)
		For (j=0;j<dimsize(Vol_Wave,1);j+=Scale)
			If (ScrnMask_Wave[i][j])
				SLP_Extract_ZProfile(Vol_WaveName,i,j,10,stv_st,stv_step)
				
				//Wave ZProfile_Wave
				dX=SLP_2GLAs_Fit("ZProfile_Wave")
				Result_Wave[i/scale][j/scale]=dX
			Else
				Result_Wave[i/scale][j/scale]=0
			Endif
		EndFor
	EndFor
	
End

Function SLP_Extract_CutOff(Vol_WaveName,Scale,ScrnMask_WName,stv_st,stv_step)
	string Vol_WaveName
	variable Scale
	string ScrnMask_WName
	variable stv_st
	variable stv_step
	
	variable i=0
	variable j=0
	variable dX=0
	
	WAVE Vol_Wave=$Vol_WaveName
	Wave ScrnMask_Wave=$ScrnMask_WName
	SLP_Extract_ZProfile(Vol_WaveName,0,0,1,stv_st,stv_step)
	Wave ZProfile_Wave
	duplicate /O ZProfile_Wave,ZProfile_Mask_Wave
	
	Make /O/N=(floor(dimsize(Vol_Wave,0)/Scale),floor(dimsize(Vol_Wave,1)/Scale)) Result_Wave
	Result_Wave=0
	
	NewImage /N=Cutoff Result_Wave
	ModifyGraph width=400,height=300,margin(right)=100
	string ImageName=stringfromlist(0,ImageNameList("Cutoff", ";" ))
	ModifyImage /W=Cutoff $ImageName ctab= {dimoffset(ZProfile_Wave,0),dimoffset(ZProfile_Wave,0)+dimdelta(ZProfile_Wave,0)*dimsize(ZProfile_Wave,0),Rainbow,0}
	ColorScale/C/N=text0/X=-20.00/Y=5.00
	
	variable ZProfile_PeakPos=0
	
	For (i=0;i<dimsize(Vol_Wave,0);i+=Scale)
		For (j=0;j<dimsize(Vol_Wave,1);j+=Scale)
			If (ScrnMask_Wave[i][j])
				SLP_Extract_ZProfile(Vol_WaveName,i,j,10,stv_st,stv_step)
				
				//Update ZProfile Mask
				wavestats /Q ZProfile_Wave
				ZProfile_PeakPos=x2pnt(ZProfile_Wave,V_maxloc)
				ZProfile_Mask_Wave=0;ZProfile_Mask_Wave[0,ZProfile_PeakPos]=1
				
				//Wave ZProfile_Wave
				dX=SLP_ERFC_Fit("ZProfile_Wave")
				Result_Wave[i/scale][j/scale]=dX
			Else
				Result_Wave[i/scale][j/scale]=0
			Endif
		EndFor
	EndFor
	
End





Function SLP_ERFC_Fit(WF_WaveName)
	string WF_WaveName
	
	WAVE WF_Wave=$WF_WaveName
	WAVE ZProfile_Mask_Wave
	Wave ZProfile_Wave

	Make/D/N=4/O W_coef
	
	//Automatic guess of the cutoff position 
	variable Guess_Cutoff_pos=0
	wavestats /Q ZProfile_Wave
	Guess_Cutoff_pos=V_maxloc-0.25
	
	W_coef[0] = {40,60,-0.25,0.2}
	FuncFit /Q/NTHR=0/TBOX=768 ce_ERFC W_coef  WF_Wave /M=ZProfile_Mask_Wave /D 
	
	//Print "dx = "+ num2str(W_Coef[2])
	return W_Coef[2]
End

Function SLP_2GLAs_Fit(WF_WaveName)
	string WF_WaveName
	
	WAVE WF_Wave=$WF_WaveName
	
	Make /O/D/N=2 BG_Coef
	Make /O/D/N=5 GLA1_coef
	Make /O/D/N=5 GLA2_coef
	BG_Coef[0] = {28,0.28}
	GLA1_coef[0] = {2,78,0.9,0.9,0.9}
	GLA2_coef[0] = {1,81.5,0.9,0.9,0.9}
	Wave Mask_Wave
	Wave /T Constraint_W
	
	//FuncFit /Q/NTHR=0/TBOX=768 {{line,BG_Coef},{SLP_FitFunc_GLA,GLA1_coef},{SLP_FitFunc_GLA,GLA2_coef}}  WF_Wave  /D /M=Mask_Wave //C=Constraint_W
	FuncFit /Q/NTHR=0/TBOX=768 {{line,BG_Coef},{SLP_FitFunc_GLA,GLA1_coef},{SLP_FitFunc_GLA,GLA2_coef}}  WF_Wave  /D /M=Mask_Wave /C=Constraint_W
	
	//print "Peak position = "+num2str(GLA1_coef[1])
	
	return GLA1_coef[1]
End

Function ce_ERFC(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = A* erfc((x-x0)/Width)+C
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 4
	//CurveFitDialog/ w[0] = A
	//CurveFitDialog/ w[1] = C
	//CurveFitDialog/ w[2] = x0
	//CurveFitDialog/ w[3] = Width

	return w[0]* erfc((x-w[2])/w[3])+w[1]
End

Function SLP_StrightLine(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = a*x+C
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 2
	//CurveFitDialog/ w[0] = C
	//CurveFitDialog/ w[1] = a

	return w[1]*x+w[0]
End

Function SLP_Func_InvGLA(int,pos,fwhm,mix,as,E)
	//For fitting K.E. (assymtry on the low x side)
	//Based on Andrey S. GLA function
	Variable int,pos,fwhm,mix,as// 5 coefficients: int,pos,fwhm,mix,as
	Variable E //To be used as independent variable
	Variable X, peak, peak_as
	
// peak
	X = E - pos
	peak = exp( -2.772589 * (1-mix) * ( X/ fwhm )^2  ) / (4 * mix * ( X / fwhm)^2  +  1 )
// asymm. peak
//
// exponential asymmetry:	
	if (X < 0) //Inverse//
		peak_as = peak * (peak + (1 - peak) * exp(as*(abs(X)) / fwhm) )
	else
		peak_as = peak
	endif
	
	//Add intensity scaling before returing the value
	return peak_as*int
End



Function SLP_Func_GLA(int,pos,fwhm,mix,as,E)
	//Based on Andrey S. GLA function
	Variable int,pos,fwhm,mix,as// 5 coefficients: int,pos,fwhm,mix,as
	Variable E //To be used as independent variable
	Variable X, peak, peak_as
	
// peak
	X = E - pos
	peak = exp( -2.772589 * (1-mix) * ( X/ fwhm )^2  ) / (4 * mix * ( X / fwhm)^2  +  1 )
// asymm. peak
//
// exponential asymmetry:	
	if (X > 0)
		peak_as = peak * (peak + (1 - peak) * exp(as*X / fwhm) )
	else
		peak_as = peak
	endif
	
	//Add intensity scaling before returing the value
	return peak_as*int
End

Function SLP_FitFunc_GLA(w,E) : FitFunc
	Wave w
	Variable E

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(E) = SLP_Func_GLA(int,pos,fwhm,mix,as,E)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ E
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = int
	//CurveFitDialog/ w[1] = pos
	//CurveFitDialog/ w[2] = fwhm
	//CurveFitDialog/ w[3] = mix
	//CurveFitDialog/ w[4] = as

	return SLP_Func_GLA(w[0],w[1],w[2],w[3],w[4],E)
End

Function SLP_FitFunc_InvGLA(w,E) : FitFunc
	Wave w
	Variable E

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(E) = SLP_Func_GLA(int,pos,fwhm,mix,as,E)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ E
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = int
	//CurveFitDialog/ w[1] = pos
	//CurveFitDialog/ w[2] = fwhm
	//CurveFitDialog/ w[3] = mix
	//CurveFitDialog/ w[4] = as

	return SLP_Func_InvGLA(w[0],w[1],w[2],w[3],w[4],E)
End

Function SLP_Func_ErfStep(int,pos,width,atten,level,E)
	//Based on Andrey S. GLA function
	Variable int,pos,width,atten,level,E
	Variable ErfStep
	
	ErfStep=(int/2)*erf((E-pos)/width)*exp(1/(E*atten))+level+int/2
	
	return ErfStep
End

Function ErfStep(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = SLP_Func_ErfStep(int,pos,width,atten,level,x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 5
	//CurveFitDialog/ w[0] = int
	//CurveFitDialog/ w[1] = pos
	//CurveFitDialog/ w[2] = width
	//CurveFitDialog/ w[3] = atten
	//CurveFitDialog/ w[4] = level

	return SLP_Func_ErfStep(w[0],w[1],w[2],w[3],w[4],x)
End

function WF_Resize()
 
		string inputwave						// for input wave
 
	string list=wavelist("*",";","DIMS:2")			// only find image stacks
 
	prompt inputwave, "Wave Select", popup list	// prompt for input wave
	doprompt "Resize", inputwave
			if(V_flag==1)
			abort
		endif
 
	wave input=$inputwave	
 
	variable x=dimsize(input,0)				// current size of the x dimension
	variable y=dimsize(input,1)				// current size of the y dimension
 
	variable xnew = x							// variables for the new pixels, set to display the old ones in the prompt
	variable ynew = y
 
	prompt xnew, "new x pixels"			
	prompt ynew, "new y pixels"
	doprompt "new dimensions", xnew, ynew
			if(V_flag==1)
			abort
		endif
 
	string newname=inputwave+"_SZ"			// output wave name
 
	variable nx= (xnew-1)/(x-1)					// calc for rescaling
	variable ny=(ynew-1)/(y-1)
 
 
	imageinterpolate/F={nx,ny}/DEST=$newname bilinear input   // image interpolation
 
 
end


//////////////////////////////////////////////////////
/////////////DISP XPS EXTRACTION (stand alone)///////////
/////////////////////////////////////////////////////

//#pragma rtGlobals=3		// Use modern global access method and strict wave access.

//Ver. ce20170214a - Can extract XPS spectrum automatically

//Todos:
//	- User's interface
//	- Folder organisation
//		- Indv. PLineCoord wave for each scan
//	- Default parameters
//	- Raw data deleting
//		- Raw data location records
//	- Universal image position
//		- The dispersie line should be inside the screen
//		- Use screen mask
//		- Absolute position (real MCP size)

Function SLP_Create_FindDispersiveLine() : Panel
	
	Dowindow /K Find_DispLine_Panel_01
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(275,100,1100,700) /N=Find_DispLine_Panel_01
	
	variable P_PosX=530
	variable P_PosY=30
	Variable P_ColSize=100
	Variable P_RowSize=20
	variable P_GapSize=20
	
	
	//ShowTools/A
	SetDrawLayer UserBack
	//DrawText 480,60,"\Z10Saved screen position"
	//DrawText 360,60,"\Z10New screen position"
	SetDrawEnv fsize= 14
	DrawText 9,25,"Find dispersive line"
	DrawText 16,45,"Threshold"
	DrawText 184,45,"Screen area"
	
	Button button1,pos={310,220},size={200,20},title="Create lines",proc=ButtonProc_CDL_Create
	Button button2,pos={520,220},size={60,20},title="Cancel",proc=ButtonProc_CDL_Cancel	
	
	//SLP_DispXPS_Extract
	//(Vol_WaveName,Threshold,MinSize,Offset,LP_Length,LP_Width,N_Lines,Disp_Factor, 
	//CenterPoint_X, CenterPoint_Y,STV_st,STV_step)
	
	SetVariable SetVar_Threshold,pos={P_PosX+0*(P_ColSize+P_GapSize),P_PosY+0*(P_RoWSize)},size={P_ColSize,P_RowSize},title="Threshold",value= root:Package_SLP:DispXPS:Threshold
	SetVariable SetVar_MinSize,pos={P_PosX+0*(P_ColSize+P_GapSize),P_PosY+1*(P_RoWSize)},size={P_ColSize,P_RowSize},title="Min. Size",value= root:Package_SLP:DispXPS:MinSize
	SetVariable SetVar_Offset,pos={P_PosX+0*(P_ColSize+P_GapSize),P_PosY+2*(P_RoWSize)},size={P_ColSize,P_RowSize},title="Offset",value= root:Package_SLP:DispXPS:Offset
	SetVariable SetVar_LPLength,pos={P_PosX+0*(P_ColSize+P_GapSize),P_PosY+3*(P_RoWSize)},size={P_ColSize,P_RowSize},title="LP Length",value= root:Package_SLP:DispXPS:LPLength
	SetVariable SetVar_LPWidth,pos={P_PosX+0*(P_ColSize+P_GapSize),P_PosY+4*(P_RoWSize)},size={P_ColSize,P_RowSize},title="LP Width",value= root:Package_SLP:DispXPS:LPWidth
	SetVariable SetVar_NLines,pos={P_PosX+1*(P_ColSize+P_GapSize),P_PosY+0*(P_RoWSize)},size={P_ColSize,P_RowSize},title="No. of Lines",value= root:Package_SLP:DispXPS:NLines
	SetVariable SetVar_DispFactor,pos={P_PosX+1*(P_ColSize+P_GapSize),P_PosY+1*(P_RoWSize)},size={P_ColSize,P_RowSize},title="Disp. Factor",value= root:Package_SLP:DispXPS:DispFactor
	SetVariable SetVar_CenterPointX,pos={P_PosX+1*(P_ColSize+P_GapSize),P_PosY+2*(P_RoWSize)},size={P_ColSize,P_RowSize},title="X\B0",value= root:Package_SLP:DispXPS:CenterPointX
	SetVariable SetVar_CenterPointY,pos={P_PosX+1*(P_ColSize+P_GapSize),P_PosY+3*(P_RoWSize)},size={P_ColSize,P_RowSize},title="Y\B0",value= root:Package_SLP:DispXPS:CenterPointY

	
	//	SetVariable SetVar_Offset,limits={-inf,inf,0},noedit=0
	//SetVariable SetVar_NLines,pos={550,84},size={150,15},noedit=1,title="No. of p. lines"
	//SetVariable SetVar_NLines,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:yCenter
	//SetVariable SetVar_LWidth,pos={550,104},size={150,15},noedit=1,title="P. line width"
	//SetVariable SetVar_LWidth,limits={-inf,inf,0},value= root:Package_SLP:Stitch:ImgAnalyzeParticles:xmin
		
	Display /HOST=Find_DispLine_Panel_01 /N=DispL_Th /W=(10,55,170,180) 
	//Appendimage /W=Find_DispLine_Panel_01#DispL_Th root:WF38_0098_Bin
	//ModifyGraph margin=6,tick=3,noLabel=2, standoff=0
	//SetAxis /A/R left
	
	Display /HOST=Find_DispLine_Panel_01 /N=DispL_Img /W=(180,55,340,180) 
	//Appendimage /W=Find_DispLine_Panel_01#DispL_Img root:WF38_0098
	//Appendtograph /W=Find_DispLine_Panel_01#DispL_Img root:WF38_0098_Bin_WMUF:Particles:W_BoundaryY vs root:WF38_0098_Bin_WMUF:Particles:W_BoundaryX
	//ModifyGraph margin=6,tick=3,noLabel=2, standoff=0
	//ModifyImage WF38_0098 ctab= {*,*,Rainbow,1}
	//SetAxis /A/R left
	//SLP_CreateMultiPLines(20,10,15)
	
	Display /HOST=Find_DispLine_Panel_01 /N=DispL_Line /W=(350,55,510,180) 
	//Appendtograph root:fit_W_BoundaryY
	//ModifyGraph rgb(fit_W_BoundaryY)=(3,52428,1)
	//Appendtograph /W=Find_DispLine_Panel_01#DispL_Line root:WF38_0098_Bin_WMUF:Particles:W_BoundaryY vs root:WF38_0098_Bin_WMUF:Particles:W_BoundaryX
	//SetAxis /A/R left
	//Modifygraph margin=6,mirror=1,tick=2,minor=1
End

Function ButtonProc_CDL_Cancel(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			DoWindow/K Find_DispLine_Panel_01
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DispXPS_Extract(Vol_WaveName,Threshold,MinSize,Offset,LP_Length,LP_Width,N_Lines,Disp_Factor, CenterPoint_X, CenterPoint_Y,STV_st,STV_step)
	string Vol_WaveName
	variable Threshold,MinSize,Offset,LP_Length,LP_Width,N_Lines
	variable Disp_Factor
	variable CenterPoint_X, CenterPoint_Y
	variable STV_st,STV_step
	
	string Th_WaveName=Vol_WaveName+"_Th"
	string Intg_WaveName=Vol_WaveName+"_Intg"
	string Spectra_WaveName=Vol_WaveName+"_Spectra"
	
	//SLP_Load_MultImg2Vol()
	
	SLP_FindDispLine(Intg_WaveName,Threshold,MinSize,Offset,LP_Length,N_Lines)
	SLP_CDL_CreateSpectra(Vol_WaveName,LP_Width)
	SLP_CDL_PlotSpctr(Spectra_WaveName,STV_st,STV_step)
	SLP_CDL_MergeSpctr(Spectra_WaveName,CenterPoint_X,CenterPoint_Y,Disp_Factor)


End


Function SLP_CDL_FindDVector(x0,y0,x1,y1,x2,y2)
	variable x0,y0,x1,y1,x2,y2
	
	variable L_abs=sqrt((x1-x2)^2+(y1-y2)^2)
	//print "L_abs = "+num2str(L_abs)
	variable L1_abs=((x1-x2)*(x0-x2)+(y1-y2)*(y0-y2))/L_abs
	//print "L1_abs = "+num2str(L1_abs)
	variable x3=x2+(L1_abs/L_abs)*(x1-x2)
	variable y3=y2+(L1_abs/L_abs)*(y1-y2)
	//print "x3 = "+num2str(x3)+", y3 = "+num2str(y3)
	//SLP_DrawArrow(x0,y0,x3,y3,"Green")
	
	variable d=sqrt((x3-x0)^2+(y3-y0)^2)
	
	If ((y3-y0)<0)
		d*=(-1)
	Endif
	
	return d
	
End

Function SLP_DrawArrow(x1,y1,x2,y2,color)
	variable x1,y1,x2,y2
	string color
	//This only work for Image Plot (with X-axis at the 'top' position). Otherwise, for normal graph -> set xcoord=bottom
	
	strswitch(Color)	// string switch
		case "Red":		// execute if case matches expression
			SetDrawEnv lineFgc=(65535,0,0)
			break						// exit from switch
		case "Green":		// execute if case matches expression
			SetDrawEnv lineFgc=(0,65535,0)
			break
		case "Blue":		// execute if case matches expression
			SetDrawEnv lineFgc=(0,0,65535)
			break
		default:							// optional default expression executed
			SetDrawEnv lineFgc=(0,0,0)					// when no case matches
	endswitch
	SetDrawEnv  xcoord=top,ycoord=left,arrow=1
	DrawLine x1,y1,x2,y2
	Doupdate


End

Function SLP_DXPS_CreateMultiPLines(VolName,Offset,LPLength,NLines)
	//DESCRIPTIONs: 	create virtual channeltrons from Disp. Line, and specified parameters: offset, channeltron length and number of channeltrons.
	//						and store the coordinates in _PLCoord wave. This is to prepare for ImageLineProfile to collect counts in XPS.
	
	string VolName //ScanName
	variable Offset,LPLength,NLines
	
	wave /T SLP_DXPS_ScanListW=root:Package_SLP:DispXPS:SLP_DXPS_ScanListW
	 //Find the row of the chosen Scan
	FindValue /TEXT=VolName /TXOP=6 SLP_DXPS_ScanListW
	variable Col=floor(V_value/dimsize(SLP_DXPS_ScanListW,0))
	variable DataRow=V_value-col*dimsize(SLP_DXPS_ScanListW,0)
	
	string ImgVolW_FName
	
	ImgVolW_FName=SLP_DXPS_ScanListW[DataRow][1]+SLP_DXPS_ScanListW[DataRow][0]
	
	string DispLine_XWave_FName=ImgVolW_FName+"_DispLX"
	string DispLine_YWave_FName=ImgVolW_FName+"_DispLY"
	string PLineCoord_FName=ImgVolW_FName+"_PLCoord"
	
	Wave DispLine_XWave=$DispLine_XWave_FName
	Wave DispLine_YWave=$DispLine_YWave_FName
	
	//Move to the data folder
	string CurrentFolder=GetDataFolder(1)
	setDataFolder SLP_DXPS_ScanListW[DataRow][1]
	
	wave DispLine_Y=$DispLine_YWave_FName
	wave DispLine_X=$DispLine_XWave_FName
	
	variable x0=DispLine_X[0]
	variable y0=DispLine_Y[0]
	variable x1=DispLine_X[1]
	variable y1=DispLine_Y[1]
	
	make /O /N=(NLines,6) $PLineCoord_FName /WAVE=PLineCoord
	PLineCoord=0
	variable Alpha=atan((y1-y0)/(x1-x0))
	
	setdrawlayer /W=SLP_DispXPS_Panel_01#DX_DispLineImg UserFront
	DrawAction /W=SLP_DispXPS_Panel_01#DX_DispLineImg delete
		
	variable i
	
	For (i=0;i<NLines;i+=1)
		//Create Perpendicular lines
		PLineCoord[i][0]=x0+Offset*cos(Alpha)+i*(x1-x0-2*Offset*cos(Alpha))/(NLines-1)
		PLineCoord[i][1]=y0+Offset*sin(Alpha)+i*(y1-y0-2*Offset*sin(Alpha))/(NLines-1)
		
		PLineCoord[i][2]=PLineCoord[i][0]+LPLength*sin(Alpha)
		PLineCoord[i][3]=PLineCoord[i][1]-LPLength*cos(Alpha)
		
		PLineCoord[i][4]=PLineCoord[i][0]-LPLength*sin(Alpha)
		PLineCoord[i][5]=PLineCoord[i][1]+LPLength*cos(Alpha)
		
		//Draw on the plot
		SetDrawEnv  /W=SLP_DispXPS_Panel_01#DX_DispLineImg xcoord=bottom,ycoord=left,lineFgc=(0,65535,0)
		DrawLine /W=SLP_DispXPS_Panel_01#DX_DispLineImg PLineCoord[i][2],PLineCoord[i][3],PLineCoord[i][4],PLineCoord[i][5]
		//Doupdate	
	Endfor
	
	//Go back to the previous folder
	SetDataFolder CurrentFolder
End

Function SLP_CDL_MergeSpctr(Sptra_W_Name,x0,y0,Disp_Factor)
	String Sptra_W_Name
	variable x0,y0,Disp_Factor 
	//(x0,y0) is the coordinate of where zero KE spot (e-gun spot at STV=0V in Disp. Plane mode) is. 
	
	wave Spectra_Wave=$Sptra_W_Name
	
	variable N_Spectra=dimsize(Spectra_Wave,1)
	
	//variable Dispersion = (Last_En-First_En)/N_Spectra
	
	wave PLineCoord //[TODO]
	variable x1,y1,x2,y2
	variable d
	
	string IndvSptrm_Wave_Name=""
	string Shftd_IndvSptrm_Wave_name=""
	
	variable i=0
	variable j=0
	variable org_offset=dimoffset(Spectra_Wave,0)
	variable org_delta=dimdelta(Spectra_Wave,0)
	variable new_offset=0
	variable N_steps=dimsize(Spectra_Wave,0)
	
	string Combined_Spectra_WName=Sptra_W_Name+"_Cmbnd"
	string DataCounts_Spectra_WName=Sptra_W_Name+"_DataCts"
	IndvSptrm_Wave_Name=Sptra_W_Name+"0"
	Wave IndvSptrm_W=$IndvSptrm_Wave_Name
	Duplicate /O IndvSptrm_W,$Combined_Spectra_WName /WAVE=Cmbnd_Spctrm_W
	Duplicate /O IndvSptrm_W,$DataCounts_Spectra_WName /WAVE=DataCts_Spctrm_W
	Cmbnd_Spctrm_W=0
	DataCts_Spctrm_W=0
	
	Display
	string TraceList=""
	string TraceName=""
	variable Grad_Offset=30000
	variable Cmbnd_Spctrm_pos=0
	variable Shftd_IndvSptrm_MinX
	variable Shftd_IndvSptrm_MaxX
	
	For (i=0;i<N_Spectra;i+=1)
		IndvSptrm_Wave_Name=Sptra_W_Name+num2str(i)
		Shftd_IndvSptrm_Wave_name=Sptra_W_Name+num2str(i)+"_Shftd"
		Wave IndvSptrm_W=$IndvSptrm_Wave_Name
		Duplicate /O IndvSptrm_W,$Shftd_IndvSptrm_Wave_name /Wave=Shftd_IndvSptrm_W
		
		//new_Offset=Org_Offset+Dispersion*(N_spectra/2-i)
		x1=PLineCoord[i][2]
		y1=PLineCoord[i][3]
		x2=PLineCoord[i][4]
		y2=PLineCoord[i][5]
		d=SLP_CDL_FindDvector(x0,y0,x1,y1,x2,y2)
		new_Offset=Org_Offset+Disp_Factor*d
		
		///print "d = "+num2str(d)
		//print "Offset = "+num2str(Disp_Factor*d)
		
		Setscale /P x,new_Offset,org_delta,Shftd_IndvSptrm_W
		
		Appendtograph Shftd_IndvSptrm_W
		
		TraceList=TraceNameList("",";",1)
		TraceName=stringFromList(ItemsinList(TraceList)-1,TraceList,";")
		TraceName=stringFromList(i,TraceList)
		ModifyGraph rgb($TraceName)=(Grad_Offset+(65535-Grad_Offset)*(i/N_Spectra),20000,20000)
		
		//Shftd_IndvSptrm_MinX=pnt2x(Shftd_IndvSptrm_W,0)
		//Shftd_IndvSptrm_MaxX=pnt2x(Shftd_IndvSptrm_W,dimsize(Shftd_IndvSptrm_W,0))
		Shftd_IndvSptrm_MinX=Dimoffset(Shftd_IndvSptrm_W,0)
		Shftd_IndvSptrm_MaxX=Dimoffset(Shftd_IndvSptrm_W,0)+(DimSize(Shftd_IndvSptrm_W,0)-1)*DimDelta(Shftd_IndvSptrm_W,0)
		
		For (j=0;j<N_Steps;j+=1)
			Cmbnd_Spctrm_pos=pnt2x(Cmbnd_Spctrm_W,j)
			If ((Cmbnd_Spctrm_pos>=Shftd_IndvSptrm_MinX)&&(Cmbnd_Spctrm_pos<=Shftd_IndvSptrm_MaxX))
				Cmbnd_Spctrm_W[j]=Cmbnd_Spctrm_W[j]+Shftd_IndvSptrm_W(Cmbnd_Spctrm_pos)
				DataCts_Spctrm_W[j]+=1
			EndIf
		
		EndFor
		DoUpdate
	EndFor
	
	Cmbnd_Spctrm_W/=DataCts_Spctrm_W
	Display Cmbnd_Spctrm_W
End

Function SLP_CDL_PlotSpctr(Sptra_W_Name,STV_st,STV_step)
	string Sptra_W_Name
	variable STV_st,STV_step
	
	Wave Sptra_Wave=$Sptra_W_Name
	
	variable i
	
	display
	string Spectra_Name
	string TraceList
	string TraceName
	variable Grad_Offset=30000
	variable BG_Offset=0
	variable Peak_value=1
	
	For (i=0;i<dimsize(Sptra_Wave,1);i+=1)
		Spectra_Name=Sptra_W_Name+num2str(i)
		duplicate /O /r=[][i] Sptra_Wave,$Spectra_Name /WAVE=Indv_Spectra
		redimension /N=-1 Indv_Spectra //Change from 2D (column wave) to normal 1D (row wave)
		setscale /P x,STV_st,STV_step,Indv_Spectra
		//Remove BG and Normalize [TODO]
		//BG_Offset=Indv_Spectra[0]
		//Indv_Spectra-=BG_Offset
		//Peak_value=WaveMax(Indv_Spectra)
		//Indv_Spectra/=Peak_Value
		//
		appendtograph Indv_Spectra
		
		//Applied gradient
		TraceList=TraceNameList("",";",1)
		TraceName=stringFromList(ItemsinList(TraceList)-1,TraceList,";")
		TraceName=stringFromList(i,TraceList)
		ModifyGraph rgb($TraceName)=(Grad_Offset+(65535-Grad_Offset)*(i/dimsize(Sptra_Wave,1)),20000,20000)
	EndFor
	
	Label bottom "Start voltage (V)"
	modifygraph mirror=1,tick=2,minor=1

End

Function SLP_CDL_CreateSpectra(Vol_W_Name,LP_Width)
	string Vol_W_Name
	variable LP_Width
	
	Wave Vol_Wave=$Vol_W_Name
	Wave PLineCoord //[Todo] Change name to individual PLineCoord for each scan
	
	variable i,j
	variable N_steps=dimsize(Vol_Wave,2)
	variable N_pLines=dimsize(PLineCoord,0)
	
	string Spectra_W_Name=Vol_W_Name+"_Spectra"
	Make /O/N=(N_steps,N_pLines) $Spectra_W_Name /WAVE=Spectra_W
	Make /O/N=2 CDL_pLX
	Make /O/N=2 CDL_pLY
	
	//appendtograph /T=top CDL_pLY vs CDL_pLX
	
	For (i=0;i<N_steps;i+=1)
		For (j=0;j<N_pLines;j+=1)
			CDL_pLX[0]=PLineCoord[j][2]
			CDL_pLY[0]=PLineCoord[j][3]
			CDL_pLX[1]=PLineCoord[j][4]
			CDL_pLY[1]=PLineCoord[j][5]
			ImageLineProfile/SC /P=(i) srcWave=Vol_Wave, xWave=CDL_pLX, yWave=CDL_pLY, width=LP_width
			wave W_ImageLineProfile
			
			//Replace NaN with zero
			MatrixOp /O W_ImageLineProfile=replace(W_ImageLineProfile,NaN,0)
			
			Spectra_W[i][j]=Sum(W_ImageLineProfile)/dimsize(W_ImageLineProfile,0)
			//DoUpdate
		
		EndFor
		
	EndFor
	variable cetemp=dimdelta(Vol_Wave,2)
	setscale /P x,dimoffset(Vol_Wave,2),dimdelta(Vol_Wave,2),Spectra_W
	
	//KillWindow Spectra
	If (FindListItem("Spectra",WInList("*",";","WIN:1"))==-1)
		NewImage /N=Spectra Spectra_W
	Endif
	ModifyGraph width=400,height=300
	DoUpdate
	ModifyGraph width=0,height=0
	string ImageName=stringfromlist(0,ImageNameList("Spectra", ";" ))
	ModifyImage /W=Spectra $ImageName ctab= {*,*,Rainbow,0}
	
End

Function SLP_FindDispLine(Img_W_Name,Threshold,MinSize,Offset,Width,N_Lines)
	string Img_W_Name
	variable Threshold,MinSize,Offset,Width,N_Lines
	
	Wave Img_W=$Img_W_Name
	string Th_Img_W_Name=Img_W_Name+"_Th"
	
	
	Duplicate /O Img_W,$Th_Img_W_Name /WAVE=Th_Image_W
	
	ImageThreshold/Q/O/I/T=(Threshold) Th_Image_W
	
	ImageAnalyzeParticles /E/W/Q/EBPC/M=3/A=(MinSize)/F stats, Th_Image_W
	
	string W_BoundaryX_FName="W_BoundaryX"
	string W_BoundaryY_FName="W_BoundaryY"
	string BoundX_W_Name=Img_W_Name+"_BX"
	string BoundY_W_Name=Img_W_Name+"_BY"
	
	duplicate /O $W_BoundaryX_FName,$BoundX_W_Name /WAVE=BX_W
	duplicate /O $W_BoundaryY_FName,$BoundY_W_Name /WAVE=BY_W
	
	Duplicate /O BY_W,DispLine
	CurveFit /Q/M=2/W=0 line, BY_W/X=BX_W/D
	
	string DispLine_Wave_Name="Fit_"+BoundY_W_Name
	string DispLine_XWave_Name=Img_W_Name+"_DispLX"
	string DispLine_YWave_Name=Img_W_Name+"_DispLY"
	Wave DispLine_Wave=$DispLine_Wave_Name
	
	make /O /N=2 $DispLine_XWave_Name /WAVE=DispLine_X_Wave
	make /O /N=2 $DispLine_YWave_Name /WAVE=DispLine_Y_Wave
	
	DispLine_X_Wave[0]=dimoffset(DispLine_Wave,0)
	DispLine_X_Wave[1]=dimoffset(DispLine_Wave,0)+dimdelta(DispLine_Wave,0)
	DispLine_Y_Wave[0]=DispLine_Wave[0]
	DispLine_Y_Wave[1]=DispLine_Wave[1]
	
	//KillWaves DispLine_Wave
	
	NewImage Img_W
	Appendtograph /T=top BY_W vs BX_W
	ModifyGraph rgb=(0,43690,65535)
	Appendtograph /T=top DispLine_Y_Wave vs DispLine_X_Wave
	
	SLP_CreateMultiPLines(DispLine_XWave_Name,DispLine_YWave_Name,Width,N_Lines,Offset)

End

Function SLP_CreateMultiPLines(DispLine_XWave_Name,DispLine_YWave_Name,LSize,N_Lines,L_Offset)
	string DispLine_XWave_Name
	string DispLine_YWave_Name
	variable LSize
	variable N_Lines
	variable L_Offset
	
	wave MainLine_Y=$DispLine_YWave_Name
	wave MainLine_X=$DispLine_XWave_Name
	
	variable y0=MainLine_Y[0]
	variable y1=MainLine_Y[1]
	variable x0=MainLine_X[0]
	variable x1=MainLine_X[1]
	
	make /O /N=(N_Lines,6) PLineCoord
	PLineCoord=0
	variable Alpha=atan((y1-y0)/(x1-x0))
	
	setdrawlayer UserFront
	DrawAction delete
		
	
	variable i
	
	For (i=0;i<N_Lines;i+=1)
		PLineCoord[i][0]=x0+L_Offset*cos(Alpha)+i*(x1-x0-2*L_Offset*cos(Alpha))/(N_Lines-1)
		PLineCoord[i][1]=y0+L_Offset*sin(Alpha)+i*(y1-y0-2*L_Offset*sin(Alpha))/(N_Lines-1)
		
		PLineCoord[i][2]=PLineCoord[i][0]+Lsize*sin(Alpha)
		PLineCoord[i][3]=PLineCoord[i][1]-Lsize*cos(Alpha)
		
		PLineCoord[i][4]=PLineCoord[i][0]-Lsize*sin(Alpha)
		PLineCoord[i][5]=PLineCoord[i][1]+Lsize*cos(Alpha)
		
		SetDrawEnv  xcoord=top,ycoord=left,lineFgc=(0,65535,0)
		DrawLine PLineCoord[i][2],PLineCoord[i][3],PLineCoord[i][4],PLineCoord[i][5]
		Doupdate
		//Doalert 1,"Line number"+num2str(i)
	
	Endfor
	
	
	
	
End


Function SLP_CreatePerpendLines(LSize)
	variable LSize
	
	wave MainLine_Y
	wave MainLine_X
	
	variable y0=MainLine_Y[0]
	variable y1=MainLine_Y[1]
	variable x0=MainLine_X[0]
	variable x1=MainLine_X[1]
	
	variable MainLine_L=sqrt((y1-y0)^2+(x1-x0)^2)
	
	variable y2=y0-LSize*(x1-x0)/MainLine_L/2
	variable x2=x0+LSize*(y1-y0)/MainLine_L/2
	variable y3=y0+LSize*(x1-x0)/MainLine_L/2
	variable x3=x0-LSize*(y1-y0)/MainLine_L/2
	
	Make /O/N=2 PLine_Y
	Make /O/N=2 PLine_X
	
	PLine_Y={y2,y3}
	PLine_X={x2,x3}
	
	//Appendtograph /T=top PLine_Y vs PLine_X
End

Function SLP_Util_MakeRainbow() //Adapted from GH MakeRainbow
	String wave_list, wave_name
	variable num_now, num_end
	variable num_start=0
	
	wave_list =TraceNameList("",";",1)
	
	// Find number of traces
	num_end = 0
	do
		wave_name = StringFromList(num_end, wave_list)
		num_end += 1
	while ( !Stringmatch(wave_name,"") )
	num_end -= 2
	num_now = 0
	do
		wave_name = StringFromList(num_now, wave_list)
		variable red, blue, green
		variable num_del, num_del_now
		num_del = num_end - num_start
		num_del_now = num_now - num_start
		
		if (num_del == 0)
			red = 65535
			green = 0
			blue = 0
		else
		// Rainbow colours: red - yellow - green - cyan - blue
			if(num_del_now  < 0.25*num_del)
				red = 65535
				green =   round(min(65535 * 4 * (num_del_now  / num_del), 65535))
				blue = 0
			else
				if (num_del_now < 0.50*num_del)
					red =   round(max( 65535 * (2 - 4*(num_del_now  / num_del) ), 0))
					green = 65535
					blue = 0
				else
					if (num_del_now < 0.75*num_del)
						red = 0
						green = 65535
						blue =   round(max(65535 * (-2 + 4*(num_del_now  / num_del) ), 0))
					else
						if (num_del_now < num_del)		
							red = 0
							green =   round(max( 65535 * (4  - 4*(num_del_now  / num_del) ), 0))
							blue = 65535
						else
							red = 0
							green = 0
							blue = 65535
						endif
					endif
				endif
			endif
		endif
		ModifyGraph rgb($wave_name)=(red, green, blue)
		num_now += 1
	while (num_now <= num_end)
End


/////////NOT USED ANYMORE///////////

Function SLP_Dispersion_Calc(x0,y0,x1,y1,x2,y2)
	//Find distance between point (x0,y0) and line defined by (x1,y1) to (x2,y2)
	variable x0,y0 //Reference point
	variable x1,y1,x2,y2 //Referred to the line in question
	//variable Disp_Factor
	
	variable Alpha
	Alpha=atan((y0-y1)/(x0-x1))-atan((y2-y1)/(x2-x1))
	//print "Alpha = "+num2str( Alpha*180/pi) +" Deg."
	variable D1=sqrt((y0-y1)^2+(x0-x1)^2)
	variable d=D1*sin(Alpha)
	
	//Add 'sign' to the distance [TO CHECK]
	//if (alpha<(pi/2))
	//	d*=(-1)
	//Endif
	print "alpha = "+num2str(alpha*180/pi)
	return d

End

Function SetVarProc_CScale(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR ColorMin=root:Package_SLP:ImgXPS:ColorMin
			NVAR ColorMax=root:Package_SLP:ImgXPS:ColorMax
			SVAR SelSubWindow=root:Package_SLP:ImgXPS:SelSubWindow 
			
			//Find the current selected row
		  	ControlInfo /W=SLP_ImgXPS_Panel_01 List_ScansList
			variable SelRow=V_Value
			Wave /T SLP_IXPS_ScanListW=root:Package_SLP:ImgXPS:SLP_IXPS_ScanListW
			
			strswitch(SelSubWindow)	// string switch
				case "SLP_ImgXPS_Panel_01#IX_RawExt1":		
					SLP_IXPS_ScanListW[SelRow][16]=num2str(ColorMin)
					SLP_IXPS_ScanListW[SelRow][17]=num2str(ColorMax)
					break	
				case "SLP_ImgXPS_Panel_01#IX_Correction1":		
					SLP_IXPS_ScanListW[SelRow][18]=num2str(ColorMin)
					SLP_IXPS_ScanListW[SelRow][19]=num2str(ColorMax)
					break
				case "SLP_ImgXPS_Panel_01#IX_ResultMap1":		
					SLP_IXPS_ScanListW[SelRow][20]=num2str(ColorMin)
					SLP_IXPS_ScanListW[SelRow][21]=num2str(ColorMax)
					break
				case "SLP_ImgXPS_Panel_01#IX_RawExt2":		
					SLP_IXPS_ScanListW[SelRow][22]=num2str(ColorMin)
					SLP_IXPS_ScanListW[SelRow][23]=num2str(ColorMax)
					break
				case "SLP_ImgXPS_Panel_01#IX_Correction2":		
					SLP_IXPS_ScanListW[SelRow][24]=num2str(ColorMin)
					SLP_IXPS_ScanListW[SelRow][25]=num2str(ColorMax)
					break
				case "SLP_ImgXPS_Panel_01#IX_ResultMap2":		
					SLP_IXPS_ScanListW[SelRow][26]=num2str(ColorMin)
					SLP_IXPS_ScanListW[SelRow][27]=num2str(ColorMax)
					break			
			endswitch
			
			string ImageName=stringfromlist(0,ImageNameList(SelSubWindow, ";" ))
			ModifyImage /W=$SelSubWindow $ImageName ctab= {ColorMin,ColorMax,,0}
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DLA_init()
	string Current_folder=getdatafolder(1)
	NewDataFolder /O  root:Package_SLP
	NewDataFolder /O  root:Package_SLP:DLA //Diffusion limited aggregation theory analysis
	SetDataFolder root:Package_SLP:DLA
	
	variable /G xAdj=0
	variable /G yAdj=0
	variable /G intAdj=0.01
	variable /G ImgTh=50
	variable /G MinSize=100
	variable /G xMin=100
	variable /G xMax=600
	variable /G yMin=0
	variable /G yMax=500
	variable /G SelRow=0
	variable /G HistBin=10
	variable /G GuessBeta=3
	variable /G GuessA=10
	//variable /G FitBeta=0
	//variable /G FitA=0
	
	Make /O/T/N=(0,64) SLP_DLA_ImgListW
	SetDimLabel 1,0,ImgName,SLP_DLA_ImgListW
	SetDimLabel 1,1,DataFolder,SLP_DLA_ImgListW
	SetDimLabel 1,2,OrgDataLoc,SLP_DLA_ImgListW
	SetDimLabel 1,3,FOV,SLP_DLA_ImgListW
	SetDimLabel 1,4,xAdj,SLP_DLA_ImgListW
	SetDimLabel 1,5,yAdj,SLP_DLA_ImgListW
	SetDimLabel 1,6,intAdj,SLP_DLA_ImgListW
	SetDimLabel 1,7,imgThreshold,SLP_DLA_ImgListW
	SetDimLabel 1,8,MinSize,SLP_DLA_ImgListW
	SetDimLabel 1,9,xMin,SLP_DLA_ImgListW
	SetDimLabel 1,10,xMax,SLP_DLA_ImgListW
	SetDimLabel 1,11,yMin,SLP_DLA_ImgListW
	SetDimLabel 1,12,yMax,SLP_DLA_ImgListW
	SetDimLabel 1,13,HistBin,SLP_DLA_ImgListW
	SetDimLabel 1,14,GuessBeta,SLP_DLA_ImgListW
	SetDimLabel 1,15,GuessA,SLP_DLA_ImgListW
	SetDimLabel 1,16,FitBeta,SLP_DLA_ImgListW
	SetDimLabel 1,17,FitA,SLP_DLA_ImgListW
	//SetDimLabel 1,18,,SLP_DLA_ImgListW
	//SetDimLabel 1,19,,SLP_DLA_ImgListW
	//SetDimLabel 1,20,,SLP_DLA_ImgListW
	//SetDimLabel 1,21,,SLP_DLA_ImgListW
	
	Make /O/T/N=(0,16) SLP_DLA_ImgListDisplayW
	SetDimLabel 1,0,ImgName,SLP_DLA_ImgListDisplayW
	SetDimLabel 1,1,FOV,SLP_DLA_ImgListDisplayW
	SetDimLabel 1,2,Notes,SLP_DLA_ImgListDisplayW
	
	Make /O/N=(0,16) SLP_DLA_ImgListDisplaySelW
	
	Setdatafolder $Current_folder
End

Function SLP_DLA_CreatePanel01()
	
	//Init
	if (!DataFolderExists("root:Package_SLP:DLA"))
		SLP_DLA_init()
	Endif
	
	NVAR xAdj=root:Package_SLP:DLA:xAdj
	NVAR yAdj=root:Package_SLP:DLA:yAdj
	NVAR intAdj=root:Package_SLP:DLA:intAdj
	NVAR ImgTh=root:Package_SLP:DLA:ImgTh
	NVAR MinSize=root:Package_SLP:DLA:MinSize
	NVAR SelRow=root:Package_SLP:DLA:SelRow
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW
	Wave /T SLP_DLA_ImgListDisplayW=root:Package_SLP:DLA:SLP_DLA_ImgListDisplayW
	Wave SLP_DLA_ImgListDisplaySelW=root:Package_SLP:DLA:SLP_DLA_ImgListDisplaySelW

	DoWindow /K SLP_DLA_Panel_01
	NewPanel /W=(30,40,850,635) /N=SLP_DLA_Panel_01

	SetDrawLayer UserFront
	SetDrawEnv /W=SLP_DLA_Panel_01 fSize=16,TextRGB=(0,0,0)
	DrawText 10,30,"SLP Diffusion-limited Aggregation model"
	
	SetDrawEnv /W=SLP_DLA_Panel_01 fSize=11,TextRGB=(0,0,0)
	DrawText 6,55,"Original image"
	SetDrawEnv /W=SLP_DLA_Panel_01 fSize=11,TextRGB=(0,0,0)
	DrawText 225,55,"Threshold image"
	SetDrawEnv /W=SLP_DLA_Panel_01 fSize=11,TextRGB=(0,0,0)
	DrawText 6,255,"Voronoi construction"
	
	SetDrawEnv /W=SLP_DLA_Panel_01 fSize=11,TextRGB=(0,0,0)
	DrawText 430,20,"Remove non-uniformity"
	SetDrawEnv /W=SLP_DLA_Panel_01 fSize=11,TextRGB=(0,0,0)
	DrawText 430,77,"Image threshold"
	
	Display /W=(5,60,220,225) /HOST=SLP_DLA_Panel_01 /N=DLA_IMAGE1
	ModifyGraph /W=SLP_DLA_Panel_01#DLA_IMAGE1 margin(left)=40,margin(right)=3,margin(bottom)=25,margin(top)=3
	Display /W=(5,260,420,580) /HOST=SLP_DLA_Panel_01 /N=DLA_IMAGE2
	ModifyGraph /W=SLP_DLA_Panel_01#DLA_IMAGE2 margin(left)=40,margin(right)=3,margin(bottom)=30,margin(top)=3
	Display /W=(225,60,420,225) /HOST=SLP_DLA_Panel_01 /N=DLA_IMAGE3
	ModifyGraph /W=SLP_DLA_Panel_01#DLA_IMAGE3 margin(left)=40,margin(right)=3,margin(bottom)=25,margin(top)=3
	Display /W=(590,25,810,180) /HOST=SLP_DLA_Panel_01 /N=DLA_Plot1
	Display /W=(590,200,810,360) /HOST=SLP_DLA_Panel_01 /N=DLA_Plot2
	
	SetVariable setvar_xAdj,pos={430,25},size={65,16},title="x:",variable=xAdj,proc=SetVarProc_DLA_FindIslands
	SetVariable setvar_xAdj,limits={0,inf,10}
	SetVariable setvar_yAdj,pos={505,25},size={65,16},title="y:",variable=yAdj,proc=SetVarProc_DLA_FindIslands
	SetVariable setvar_yAdj,limits={0,inf,10}
	SetVariable setvar_intAdj,pos={430,45},size={140,16},title="Int:",variable=intAdj,proc=SetVarProc_DLA_FindIslands
	SetVariable setvar_intAdj,limits={0,inf,0.00002}
	
	SetVariable setvar_threshold,pos={430,80},size={140,16},title="Threshold:",variable=ImgTh,proc=SetVarProc_DLA_FindIslands
	SetVariable setvar_MinSize,pos={430,100},size={140,16},title="MinSize:",variable=MinSize,proc=SetVarProc_DLA_FindIslands
	
	SetVariable setvar_xMin,pos={430,180},size={140,12},title="Min x:",proc=SetVarProc_DLA_ScreenParam
	SetVariable setvar_xMin,value= root:Package_SLP:DLA:xMin
	SetVariable setvar_xMax,pos={430,200},size={140,12},title="Max x:",proc=SetVarProc_DLA_ScreenParam
	SetVariable setvar_xMax,value= root:Package_SLP:DLA:xMax
	SetVariable setvar_yMin,pos={430,220},size={140,12},title="Min y:",proc=SetVarProc_DLA_ScreenParam
	SetVariable setvar_yMin,value= root:Package_SLP:DLA:yMin
	SetVariable setvar_yMax,pos={430,240},size={140,12},title="Max y:",proc=SetVarProc_DLA_ScreenParam
	SetVariable setvar_yMax,value= root:Package_SLP:DLA:yMax
	
	SetVariable setvar_HistBin,pos={430,285},size={140,12},title="Histogram Binning:",proc=SetVarProc_DLA_HistBin
	SetVariable setvar_HistBin,value= root:Package_SLP:DLA:HistBin
	
	SetVariable setvar_GssBeta,pos={430,305},size={65,12},title="Beta:",proc=SetVarProc_DLA_GssBeta
	SetVariable setvar_GssBeta,value= root:Package_SLP:DLA:GuessBeta,limits={0.001,inf,0.2}
	SetVariable setvar_GssA,pos={500,305},size={65,12},title="A:",proc=SetVarProc_DLA_GssBeta
	SetVariable setvar_GssA,value= root:Package_SLP:DLA:GuessA
	
	ListBox ListBox_ImageList,pos={430,370},size={380,195},listwave=SLP_DLA_ImgListDisplayW,selWave=SLP_DLA_ImgListDisplaySelW
	ListBox ListBox_ImageList, widths={100,30,120,1,1,1,1,1,1,1,1,1,1,1,1,1,1},userColumnResize=1,mode=2,proc=ListBoxProc_DLA_ImgList
	ListBox ListBox_ImageList, SelRow=SelRow
	
	Button Button_FindIsl,pos={430,120},size={140,16},title="Find islands",fSize=10
	Button Button_EditIslPos,pos={430,140},size={140,16},title="Edit island positions"
	Button Button_EditIslPos,fSize=10
	Button Button_FindScrn,pos={430,160},size={140,16},title="Find screen",fSize=10
	
	Button Button_FindISD,pos={430,260},size={140,20},title="Find island size distribution"
	Button Button_FindISD,fSize=10,proc=ButtonProc_DLA_FindISD

	Button Button_BetaFit,pos={430,340},size={140,16},title="Beta function fitting",fsize=10,proc=ButtonProc_DLA_BetaFit
	
	Button Button_LoadImg,pos={440,570},size={100,16},title="Load image..",fSize=10,proc=ButtonProc_DLA_ChooseImgW
	Button Button_DelImg,pos={550,570},size={100,16},title="Delete image..",fSize=10,proc=ButtonProc_DLA_DelImage
	Button Button_Done,pos={750,570},size={50,16},title="Done",fSize=10,proc=ButtonProc_DLA_Done

	Button Button_PlotOrg,pos={180,40},size={40,16},title="Plot",fSize=10,proc=ButtonProc_DLA_Plot
	Button Button_PlotTh,pos={380,40},size={40,16},title="Plot",fSize=10,proc=ButtonProc_DLA_Plot
	Button Button_PlotVor,pos={380,240},size={40,16},title="Plot",fSize=10,proc=ButtonProc_DLA_Plot
	Button Button_PlotIVArea,pos={775,3},size={40,16},title="Plot",fSize=10,proc=ButtonProc_DLA_Plot
	Button Button_PlotISD,pos={775,185},size={40,16},title="Plot",fSize=10,proc=ButtonProc_DLA_Plot
	
	If (dimsize(SLP_DLA_ImgListW,0)>0)
		SLP_DLA_DisplaySelectedImg()
	EndIf
End

Function SLP_DLA_DisplaySelectedImg()
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	
	String ImgIntCorrW_Name=ImgW_FName+"_IntCorr"
	String IntNrmImgW_Name=ImgW_FName+"_IntNrm"
	String ThImgW_Name=ImgW_FName+"_Th"
	String ESpotXW_Name=ImgW_FName+"_ESpotX"
	String ESpotYW_Name=ImgW_FName+"_ESpotY"
	String VEdgesM_Name=ImgW_FName+"_VEdges"
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
	String VAreaResM_FName=ImgW_FName+"_VAreaRes"
	String VEdgesXW_Name=ImgW_FName+"_VEdgesX"
	String VEdgesYW_Name=ImgW_FName+"_VEdgesY"
	String IslandAreaW_FName=ImgW_FName+"_IsArea"
	String VoronoiAreaW_FName=ImgW_FName+"_VoArea"
	String NrmAreaW_FName=ImgW_FName+"_NrmArea"
	String NrmAreaHW_FName=ImgW_FName+"_NrmAreaH"
	String BetaFuncCoefW_FName=ImgW_FName+"_BetaCoef"
	String AreaTableW_FName=ImgW_FName+"_AreaTabl"
	String BetaCurve_FName=ImgW_FName+"_BetaCurve"

	Wave ImgW=$ImgW_FName
	
	NVAR xAdj=root:Package_SLP:DLA:xAdj
	NVAR yAdj=root:Package_SLP:DLA:yAdj
	NVAR intAdj=root:Package_SLP:DLA:intAdj
	NVAR ImgTh=root:Package_SLP:DLA:ImgTh
	NVAR MinSize=root:Package_SLP:DLA:MinSize
	NVAR xMin=root:Package_SLP:DLA:xMin
	NVAR yMin=root:Package_SLP:DLA:yMin
	NVAR xMax=root:Package_SLP:DLA:xMax
	NVAR yMax=root:Package_SLP:DLA:yMax
	NVAR HistBin=root:Package_SLP:DLA:HistBin
	NVAR GuessBeta=root:Package_SLP:DLA:GuessBeta
	NVAR GuessA=root:Package_SLP:DLA:GuessA
	
	xAdj=str2num(SLP_DLA_ImgListW[SelRow][4])
	yAdj=str2num(SLP_DLA_ImgListW[SelRow][5])
	intAdj=str2num(SLP_DLA_ImgListW[SelRow][6])
	imgTh=str2num(SLP_DLA_ImgListW[SelRow][7])
	MinSize=str2num(SLP_DLA_ImgListW[SelRow][8])
	xMin=str2num(SLP_DLA_ImgListW[SelRow][9])
	xMax=str2num(SLP_DLA_ImgListW[SelRow][10])
	yMin=str2num(SLP_DLA_ImgListW[SelRow][11])
	yMax=str2num(SLP_DLA_ImgListW[SelRow][12])
	HistBin=str2num(SLP_DLA_ImgListW[SelRow][13])
	GuessBeta=str2num(SLP_DLA_ImgListW[SelRow][14])
	GuessA=str2num(SLP_DLA_ImgListW[SelRow][15])
	
	SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_IMAGE1",ImgW_FName,1)
	
	If (Exists(IntNrmImgW_Name))
		SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_IMAGE2",IntNrmImgW_Name,1)
	Else
		SLP_Util_RemoveAllImages("SLP_DLA_Panel_01#DLA_IMAGE2")
	Endif
	
	If (Exists(ThImgW_Name))
		SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_IMAGE3",ThImgW_Name,1)
	Else
		SLP_Util_RemoveAllImages("SLP_DLA_Panel_01#DLA_IMAGE3")
	Endif
	
	If (Exists(ESpotXW_Name))
		SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_IMAGE2",ESpotXW_Name+";"+ESpotYW_Name,2)
		Modifygraph /W=SLP_DLA_Panel_01#DLA_IMAGE2 mode=3,marker=19,msize=2
	Else
		SLP_Util_RemoveAllImages("SLP_DLA_Panel_01#DLA_IMAGE2")
		SLP_Util_RemoveAllTraces("SLP_DLA_Panel_01#DLA_IMAGE2")
	EndIf
	
	variable Img_xMin=dimoffset(ImgW,0)
	variable Img_xMax=dimoffset(ImgW,0)+dimdelta(ImgW,0)*(dimsize(ImgW,0)-1)
	variable Img_yMin=dimoffset(ImgW,1)
	variable Img_yMax=dimoffset(ImgW,1)+dimdelta(ImgW,1)*(dimsize(ImgW,1)-1)
	
	If (Exists(VEdgesYW_Name))
		Appendtograph /W=SLP_DLA_Panel_01#DLA_IMAGE2 $VEdgesYW_Name vs $VEdgesXW_Name
		SetAxis /W=SLP_DLA_Panel_01#DLA_IMAGE2 bottom,Img_xMin,Img_xMax
		SetAxis /R/W=SLP_DLA_Panel_01#DLA_IMAGE2 left,Img_yMin,Img_yMax
	Endif
	
	if (Exists(VoronoiAreaW_FName)&&Exists(IslandAreaW_FName))
		SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_PLOT1",VoronoiAreaW_FName+";"+IslandAreaW_FName,2)
		Modifygraph /W=SLP_DLA_Panel_01#DLA_PLOT1 mode=3,mirror=1,minor=1,tick=2
		Label /W=SLP_DLA_Panel_01#DLA_PLOT1 bottom "Voronoi area"
		Label /W=SLP_DLA_Panel_01#DLA_PLOT1 left "Island area"
		SetAxis /W=SLP_DLA_Panel_01#DLA_PLOT1 bottom,0,*
		SetAxis /W=SLP_DLA_Panel_01#DLA_PLOT1 left,0,*
	Else
		SLP_Util_RemoveAllTraces("SLP_DLA_Panel_01#DLA_PLOT1")
	Endif
	
	If (Exists(NrmAreaHW_FName))
		SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_PLOT2",NrmAreaHW_FName,0)
		Modifygraph /W=SLP_DLA_Panel_01#DLA_PLOT2 mode=5,mirror=1,minor=1,tick=2,hbFill=4
		Label /W=SLP_DLA_Panel_01#DLA_PLOT2 bottom "Normalized island area"
		Label /W=SLP_DLA_Panel_01#DLA_PLOT2 left "Counts"
	Else
		SLP_Util_RemoveAllTraces("SLP_DLA_Panel_01#DLA_PLOT2")
	Endif
	
	If (Exists(BetaCurve_FName))
		Appendtograph /W=SLP_DLA_Panel_01#DLA_PLOT2 $BetaCurve_FName
	Endif
End

Function ButtonProc_DLA_DelImage(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_DLA_DelImage()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DLA_DelImage()
	
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	Wave /T SLP_DLA_ImgListDisplayW=root:Package_SLP:DLA:SLP_DLA_ImgListDisplayW 
	Wave SLP_DLA_ImgListDisplaySelW=root:Package_SLP:DLA:SLP_DLA_ImgListDisplaySelW 
	String ImgName=SLP_DLA_ImgListW[SelRow][0]
	String PromptStr="Are you sure that you want to delete: "+ImgName
	
	Doalert 1,PromptStr
	If (V_flag==1)
		If (SelRow<dimsize(SLP_DLA_ImgListW,0))
			ListBox ListBox_ImageList, SelRow=SelRow+1 //Select the next one
			SLP_DLA_DisplaySelectedImg()
		Elseif (SelRow==dimsize(SLP_DLA_ImgListW,0)) //If the last image is to be deleted
			ListBox ListBox_ImageList, SelRow=0 //Select the first row
			SLP_DLA_DisplaySelectedImg()
		Endif
		
		String DataFolder_FName=SLP_DLA_ImgListW[SelRow][1]
		killDataFolder /Z $DataFolder_FName
		variable DeleteImgError_Flg=V_Flag
		
		if (DeleteImgError_Flg==0) 
			//Only update ScanListW if Image folder can be deleted
			DeletePoints SelRow,1, SLP_DLA_ImgListW
			DeletePoints SelRow,1, SLP_DLA_ImgListDisplayW
			DeletePoints SelRow,1, SLP_DLA_ImgListDisplaySelW
		Endif
	Endif
	
	ListBox ListBox_ImageList, SelRow=SelRow
	
	Return DeleteImgError_Flg
End

Function ButtonProc_DLA_Plot(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
			variable SelRow=V_Value
			Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
			String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
			
			String ImgIntCorrW_Name=ImgW_FName+"_IntCorr"
			String IntNrmImgW_Name=ImgW_FName+"_IntNrm"
			String ThImgW_Name=ImgW_FName+"_Th"
			String ESpotXW_Name=ImgW_FName+"_ESpotX"
			String ESpotYW_Name=ImgW_FName+"_ESpotY"
			String VEdgesM_Name=ImgW_FName+"_VEdges"
			String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
			String VAreaResM_FName=ImgW_FName+"_VAreaRes"
			String VEdgesXW_Name=ImgW_FName+"_VEdgesX"
			String VEdgesYW_Name=ImgW_FName+"_VEdgesY"
			String IslandAreaW_FName=ImgW_FName+"_IsArea"
			String VoronoiAreaW_FName=ImgW_FName+"_VoArea"
			String NrmAreaW_FName=ImgW_FName+"_NrmArea"
			String NrmAreaHW_FName=ImgW_FName+"_NrmAreaH"
			String BetaFuncCoefW_FName=ImgW_FName+"_BetaCoef"
			String AreaTableW_FName=ImgW_FName+"_AreaTabl"
			String BetaCurve_FName=ImgW_FName+"_BetaCurve"
			
			Wave ImgW=$ImgW_FName
			variable Img_xMin=dimoffset(ImgW,0)
			variable Img_xMax=dimoffset(ImgW,0)+dimdelta(ImgW,0)*(dimsize(ImgW,0)-1)
			variable Img_yMin=dimoffset(ImgW,1)
			variable Img_yMax=dimoffset(ImgW,1)+dimdelta(ImgW,1)*(dimsize(ImgW,1)-1)
										
			StrSwitch(ba.CtrlName)	// string switch
				case "Button_PlotOrg":
					Display		
					AppendImage $ImgW_FName
					break
				case "Button_PlotTh":	
					Display	
					AppendImage $ThImgW_Name
					break
				case "Button_PlotVor":	
					Display	
					AppendImage $IntNrmImgW_Name
					Appendtograph $ESpotYW_Name vs $ESpotXW_Name
					Modifygraph mode=3,marker=19,msize=2 
					Appendtograph $VEdgesYW_Name vs $VEdgesXW_Name
					SetAxis bottom,Img_xMin,Img_xMax
					SetAxis left,Img_yMin,Img_yMax
					break
				case "Button_PlotIVArea":	
					Display	
					Appendtograph $IslandAreaW_FName vs $VoronoiAreaW_FName
					Modifygraph mode=3,mirror=1,minor=1,tick=2
					Label bottom "Voronoi area"
					Label left "Island area"
					SetAxis bottom,0,*
					SetAxis left,0,*
					break
				case "Button_PlotISD":	
					Display	
					Appendtograph $NrmAreaHW_FName
					Modifygraph mode=5,mirror=1,minor=1,tick=2,hbFill=4
					Label bottom "Normalized island area"
					Label left "Counts"
					Appendtograph $BetaCurve_FName
					break
			endswitch
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DLA_ScreenParam(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR xMin=root:Package_SLP:DLA:xMin
			NVAR yMin=root:Package_SLP:DLA:yMin
			NVAR xMax=root:Package_SLP:DLA:xMax
			NVAR yMax=root:Package_SLP:DLA:yMax
			NVAR HistBin=root:Package_SLP:DLA:HistBin
			
			ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
			variable SelRow=V_Value
			Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW
			SLP_DLA_ImgListW[SelRow][9]=num2str(xMin)
			SLP_DLA_ImgListW[SelRow][10]=num2str(xMax)
			SLP_DLA_ImgListW[SelRow][11]=num2str(yMin)
			SLP_DLA_ImgListW[SelRow][12]=num2str(yMax)
			SLP_DLA_ImgListW[SelRow][13]=num2str(HistBin)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DLA_HistBin(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR HistBin=root:Package_SLP:DLA:HistBin
			
			ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
			variable SelRow=V_Value
			Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW
			SLP_DLA_ImgListW[SelRow][13]=num2str(HistBin)
			SLP_DLA_CreateIsSizeHist()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SetVarProc_DLA_GssBeta(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			
			NVAR GuessBeta=root:Package_SLP:DLA:GuessBeta
			NVAR GuessA=root:Package_SLP:DLA:GuessA
			
			ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
			variable SelRow=V_Value
			Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW
			SLP_DLA_ImgListW[SelRow][14]=num2str(GuessBeta)
			SLP_DLA_ImgListW[SelRow][15]=num2str(GuessA)
			
			SLP_DLA_CreateGssBetaCurve()
			
			SLP_DLA_DisplaySelectedImg()
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End





Function ButtonProc_DLA_ChooseImgW(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			String SelectedWaveFName=""
			Execute "CreateBrowser prompt=\"Select image wave\", showWaves=1, showVars=0, showStrs=0" 
			//Old style. in Igor7 no need to use Execute
			SVAR S_BrowserList=S_BrowserList
			NVAR V_Flag=V_Flag
			if(V_Flag!=0)
				SelectedWaveFName=stringfromlist(0,S_BrowserList)
			endif
					  	
			SLP_DLA_LoadImg(SelectedWaveFName,NaN)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DLA_Done(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			DoWindow /K SLP_DLA_Panel_01
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DLA_FindISD(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			
			SLP_DLA_VoronoiTraceAll(100,600,0,500)
			SLP_DLA_CreateAreaTable()
			SLP_DLA_DisplaySelectedImg()
						
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ButtonProc_DLA_BetaFit(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			SLP_DLA_BetaFit()
			SLP_DLA_DisplaySelectedImg()
						
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function ListBoxProc_DLA_ImgList(lba) : ListBoxControl
	STRUCT WMListboxAction &lba

	Variable row = lba.row
	Variable col = lba.col
	WAVE/T/Z listWave = lba.listWave
	WAVE/Z selWave = lba.selWave

	switch( lba.eventCode )
		case -1: // control being killed
			break
		case 1: // mouse down
			break
		case 3: // double click
			break
		case 4: // cell selection
			SLP_DLA_DisplaySelectedImg()
			NVAR SelRow=root:Package_SLP:DLA:SelRow
			SelRow=row
		case 5: // cell selection plus shift key
			break
		case 6: // begin edit
			break
		case 7: // finish edit
			break
		case 13: // checkbox clicked (Igor 6.2 or later)
			break
	endswitch

	return 0
End




Function SLP_DLA_LoadImg(ImgW_FName,FOV)
	String ImgW_FName
	Variable FOV
	String ImgW_Name=stringFromList(itemsinlist(ImgW_FName,":")-1,ImgW_FName,":")
	String ImgW_DataFolder=RemoveEnding(ImgW_FName,ImgW_Name)
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW
	Wave /T SLP_DLA_ImgListDisplayW=root:Package_SLP:DLA:SLP_DLA_ImgListDisplayW
	Wave SLP_DLA_ImgListDisplaySelW=root:Package_SLP:DLA:SLP_DLA_ImgListDisplaySelW
	
	String NewDataFolder_Name="root:Package_SLP:DLA:"+ImgW_Name
	NewDataFolder $NewDataFolder_Name
	
	Wave ImgW=$ImgW_FName
	
	Redimension /N=(dimsize(SLP_DLA_ImgListW,0)+1,64)  SLP_DLA_ImgListW
	Redimension /N=(dimsize(SLP_DLA_ImgListDisplayW,0)+1,16)  SLP_DLA_ImgListDisplayW
	Redimension /N=(dimsize(SLP_DLA_ImgListDisplaySelW,0)+1,16)  SLP_DLA_ImgListDisplaySelW
	
	Variable SelRow=dimsize(SLP_DLA_ImgListW,0)-1
	
	ListBox ListBox_ImageList,SelRow=SelRow
	
	SLP_DLA_ImgListW[SelRow][0]=ImgW_Name
	SLP_DLA_ImgListW[SelRow][1]=NewDataFolder_Name+":"
	SLP_DLA_ImgListW[SelRow][2]=ImgW_DataFolder
	SLP_DLA_ImgListW[SelRow][3]=num2str(FOV) //FOV
	SLP_DLA_ImgListW[SelRow][4]=num2str(dimsize(ImgW,0)/2) //intensity correction X (default = middle of the image)
	SLP_DLA_ImgListW[SelRow][5]=num2str(dimsize(ImgW,1)/2)//intensity correction Y (default = middle of the image)
	SLP_DLA_ImgListW[SelRow][6]="0.00001" //Intensity correction
	SLP_DLA_ImgListW[SelRow][7]="50" //Threshold
	SLP_DLA_ImgListW[SelRow][8]="100" //MinSize
	SLP_DLA_ImgListW[SelRow][9]="0"
	SLP_DLA_ImgListW[SelRow][10]=num2str(dimsize(ImgW,0)/2)
	SLP_DLA_ImgListW[SelRow][11]="0"
	SLP_DLA_ImgListW[SelRow][12]=num2str(dimsize(ImgW,1)/2)
	
	SLP_DLA_ImgListDisplayW[SelRow][0]=ImgW_Name
	SLP_DLA_ImgListDisplayW[SelRow][1]=num2str(FOV)
	SLP_DLA_ImgListDisplayW[SelRow][2]=""
	
	SLP_DLA_ImgListDisplaySelW[SelRow][1]=2 //FOV
	SLP_DLA_ImgListDisplaySelW[SelRow][2]=2 //Notes
	
	String NewImgW_Fname=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	Duplicate /O $ImgW_FName,$NewImgW_Fname
	
	
End

Function SLP_DLA_CreateAreaTable()
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	//NVAR HistBin=root:Package_SLP:DLA:HistBin
	
	//Variable NBin=10
	
	String ImgIntCorrW_FName=ImgW_FName+"_IntCorr"
	String IntNrmImgW_FName=ImgW_FName+"_IntNrm"
	String ThImgW_FName=ImgW_FName+"_Th"
	String ESpotXW_FName=ImgW_FName+"_ESpotX"
	String ESpotYW_FName=ImgW_FName+"_ESpotY"
	String VEdgesM_FName=ImgW_FName+"_VEdges"
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
	String VAreaResM_FName=ImgW_FName+"_VAreaRes"
	String VEdgesXW_FName=ImgW_FName+"_VEdgesX"
	String VEdgesYW_FName=ImgW_FName+"_VEdgesY"
	String IslandAreaW_FName=ImgW_FName+"_IsArea"
	String VoronoiAreaW_FName=ImgW_FName+"_VoArea"
	String NrmAreaW_FName=ImgW_FName+"_NrmArea"
	String NrmAreaHW_FName=ImgW_FName+"_NrmAreaH"
	String BetaFuncCoefW_FName=ImgW_FName+"_BetaCoef"
	String AreaTableW_FName=ImgW_FName+"_AreaTabl"
	
	wave ESpotXW=$ESpotXW_FName
	wave ESpotYW=$ESpotYW_FName
	wave IslandAreaW=$IslandAreaW_FName
	wave VAreaResM=$VAreaResM_FName
	wave VEdgesProcM=$VEdgesProcM_FName
	
	make /O/N=(dimsize(IslandAreaW,0),8) $AreaTableW_FName /WAVE=AreaTableW
	AreaTableW=NaN
	
	AreaTableW[][0]=ESpotXW[p]
	AreaTableW[][1]=ESpotYW[p]
	AreaTableW[][2]=IslandAreaW[p]
	
	variable i=0
	variable j=0
	variable N_CellSides=0
	variable ObjNo=0
	
	Make /O/N=0 $IslandAreaW_FName /WAVE=IslandAreaW
	Make /O/N=0 $VoronoiAreaW_FName /WAVE=VoronoiAreaW
	//Make /O/N=0 $NrmAreaW_Name /WAVE=NrmAreaW
	IslandAreaW=0
	VoronoiAreaW=0
	//NrmAreaW=0
	
	For (i=0;i<dimsize(VEdgesProcM,0);i+=1)
		if (numtype(VAreaResM[i][0])!=2) //If not NaN
			N_CellSides=VAreaResM[i][0]
			Make /O/N=(N_CellSides+1) CellPolyX
			Make /O/N=(N_CellSides+1) CellPolyY
			CellPolyX[]=VEdgesProcM[i][2*p]
			CellPolyY[]=VEdgesProcM[i][2*p+1]
			FindPointsInPoly ESpotXW, ESpotYW, CellPolyX, CellPolyY
			Wave W_inPoly
			FindValue /V=1 W_inPoly
			ObjNo=V_Value
			AreaTableW[ObjNo][3]=VAreaResM[i][1]
			//AreaTableW[ObjNo][4]=AreaTableW[ObjNo][2]/W_VoronoiAreaResults[i][1] //Normalized island size (by cell size)
			
			//make indv. area waves
			Redimension /N=(dimsize(IslandAreaW,0)+1) IslandAreaW
			Redimension /N=(dimsize(VoronoiAreaW,0)+1) VoronoiAreaW
			//Redimension /N=(dimsize(NrmAreaW,0)+1) NrmAreaW
			
			IslandAreaW[dimsize(IslandAreaW,0)-1]=AreaTableW[ObjNo][2]
			VoronoiAreaW[dimsize(VoronoiAreaW,0)-1]=AreaTableW[ObjNo][3]
			//NrmAreaW[dimsize(NrmAreaW,0)-1]=AreaTableW[ObjNo][4]
		EndIf
	EndFor
	
	SLP_DLA_CreateIsSizeHist()
	
	
End

Function SLP_DLA_CreateIsSizeHist()
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	NVAR HistBin=root:Package_SLP:DLA:HistBin
	
	String ImgIntCorrW_FName=ImgW_FName+"_IntCorr"
	String IntNrmImgW_FName=ImgW_FName+"_IntNrm"
	String ThImgW_FName=ImgW_FName+"_Th"
	String ESpotXW_FName=ImgW_FName+"_ESpotX"
	String ESpotYW_FName=ImgW_FName+"_ESpotY"
	String VEdgesM_FName=ImgW_FName+"_VEdges"
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
	String VAreaResM_FName=ImgW_FName+"_VAreaRes"
	String VEdgesXW_FName=ImgW_FName+"_VEdgesX"
	String VEdgesYW_FName=ImgW_FName+"_VEdgesY"
	String IslandAreaW_FName=ImgW_FName+"_IsArea"
	String VoronoiAreaW_FName=ImgW_FName+"_VoArea"
	String NrmAreaW_FName=ImgW_FName+"_NrmArea"
	String NrmAreaHW_FName=ImgW_FName+"_NrmAreaH"
	String BetaFuncCoefW_FName=ImgW_FName+"_BetaCoef"
	String AreaTableW_FName=ImgW_FName+"_AreaTabl"
	
	Wave IslandAreaW=$IslandAreaW_FName

	Wavestats /Q IslandAreaW
	Duplicate /O IslandAreaW,$NrmAreaW_FName /WAVE=NrmAreaW
	NrmAreaW/=V_avg
	
	//Histogram
	Make /O/N=(HistBin) $NrmAreaHW_FName /WAVE=NrmAreaHW
	WaveStats /Q NrmAreaW
	Setscale /I x,V_min,V_max,NrmAreaHW
	Histogram /B={V_min,(V_max-V_min)/HistBin,HistBin} NrmAreaW,NrmAreaHW
	//SLP_Util_AddnRmTraces("SLP_DLA_Panel_01#DLA_PLOT1",NrmAreaHW_FName,0)
	
End

Function SLP_DLA_CreateGssBetaCurve()
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	
	String NrmAreaHW_FName=ImgW_FName+"_NrmAreaH"
	String BetaCurve_FName=ImgW_FName+"_BetaCurve"
	
	NVAR GuessBeta=root:Package_SLP:DLA:GuessBeta
	NVAR GuessA=root:Package_SLP:DLA:GuessA
	
	Wave NrmAreaHW=$NrmAreaHW_FName
	
	Make /O/N=128 $BetaCurve_FName /WAVE=BetaCurve
	SetScale /I x,dimoffset(NrmAreaHW,0),dimoffset(NrmAreaHW,0)+(dimsize(NrmAreaHW,0)-1)*dimdelta(NrmAreaHW,0),BetaCurve
	
	//make /O /N=2 CoefW
	//CoefW[0]={GuessBeta,GuessA}
	
	BetaCurve=GuessA*(GuessBeta^GuessBeta)/gamma(GuessBeta)*x^(GuessBeta-1)*exp(-1*GuessBeta*x)
End

Function SLP_DLA_BetaFit()
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	NVAR HistBin=root:Package_SLP:DLA:HistBin
	NVAR GuessBeta=root:Package_SLP:DLA:GuessBeta
	NVAR GuessA=root:Package_SLP:DLA:GuessA
	variable FitBeta=0
	variable FitA=0
	
	String ImgIntCorrW_FName=ImgW_FName+"_IntCorr"
	String IntNrmImgW_FName=ImgW_FName+"_IntNrm"
	String ThImgW_FName=ImgW_FName+"_Th"
	String ESpotXW_FName=ImgW_FName+"_ESpotX"
	String ESpotYW_FName=ImgW_FName+"_ESpotY"
	String VEdgesM_FName=ImgW_FName+"_VEdges"
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
	String VAreaResM_FName=ImgW_FName+"_VAreaRes"
	String VEdgesXW_FName=ImgW_FName+"_VEdgesX"
	String VEdgesYW_FName=ImgW_FName+"_VEdgesY"
	String IslandAreaW_FName=ImgW_FName+"_IsArea"
	String VoronoiAreaW_FName=ImgW_FName+"_VoArea"
	String NrmAreaW_FName=ImgW_FName+"_NrmArea"
	String NrmAreaHW_FName=ImgW_FName+"_NrmAreaH"
	String BetaFuncCoefW_FName=ImgW_FName+"_BetaCoef"
	String AreaTableW_FName=ImgW_FName+"_AreaTabl"
	
	Wave NrmAreaHW=$NrmAreaHW_FName
	//Fit
	Make /O/D/N=2/O $BetaFuncCoefW_FName /WAVE=BetaFuncCoefW
	BetaFuncCoefW[0] = {GuessBeta,GuessA}
	FuncFit/NTHR=0/TBOX=768 WKW_ISD BetaFuncCoefW  NrmAreaHW /D 
	FitBeta=BetaFuncCoefW[0]
	FitA=BetaFuncCoefW[1]
	SLP_DLA_ImgListW[SelRow][16]=num2str(FitBeta)
	SLP_DLA_ImgListW[SelRow][17]=num2str(FitA)
End

Function SLP_DLA_CreateAreaTable_Old(ImgWName,NBin)
	String ImgWName
	Variable NBin
	
	String ImgIntCorrW_Name=ImgWName+"_IntCorr"
	String IntNrmImgW_Name=ImgWName+"_IntNrm"
	String ThImgW_Name=ImgWName+"_Th"
	String ESpotXW_Name=ImgWName+"_ESpotX"
	String ESpotYW_Name=ImgWName+"_ESpotY"
	String AreaTableW_Name=ImgWName+"_ATable"
	String IslandAreaW_Name=ImgWName+"_IslArea"
	String VoronoiAreaW_Name=ImgWName+"_VorArea"
	String NrmAreaW_Name=ImgWName+"_NrmArea"
	String NrmAreaHW_Name=ImgWName+"_NrmAreaH"
	String BetaFuncCoefW_Name=ImgWName+"_BetaCoef"
	
	wave ESpotXW=$ESpotXW_Name
	wave ESpotYW=$ESpotYW_Name
	wave W_ImageObjArea
	wave W_VoronoiAreaResults
	wave M_VoronoiEdgesProc
	
	make /O/N=(dimsize(W_ImageObjArea,0),8) $AreaTableW_Name /WAVE=AreaTableW
	AreaTableW=NaN
	
	AreaTableW[][0]=ESpotXW[p]
	AreaTableW[][1]=ESpotYW[p]
	AreaTableW[][2]=W_ImageObjArea[p]
	
	variable i=0
	variable j=0
	variable N_CellSides=0
	variable ObjNo=0
	
	Make /O/N=0 $IslandAreaW_Name /WAVE=IslandAreaW
	Make /O/N=0 $VoronoiAreaW_Name /WAVE=VoronoiAreaW
	//Make /O/N=0 $NrmAreaW_Name /WAVE=NrmAreaW
	IslandAreaW=0
	VoronoiAreaW=0
	//NrmAreaW=0
	
	For (i=0;i<dimsize(M_VoronoiEdgesProc,0);i+=1)
		if (numtype(W_VoronoiAreaResults[i][0])!=2) //If not NaN
			N_CellSides=W_VoronoiAreaResults[i][0]
			Make /O/N=(N_CellSides+1) CellPolyX
			Make /O/N=(N_CellSides+1) CellPolyY
			CellPolyX[]=M_VoronoiEdgesProc[i][2*p]
			CellPolyY[]=M_VoronoiEdgesProc[i][2*p+1]
			FindPointsInPoly ESpotXW, ESpotYW, CellPolyX, CellPolyY
			Wave W_inPoly
			FindValue /V=1 W_inPoly
			ObjNo=V_Value
			AreaTableW[ObjNo][3]=W_VoronoiAreaResults[i][1]
			//AreaTableW[ObjNo][4]=AreaTableW[ObjNo][2]/W_VoronoiAreaResults[i][1] //Normalized island size (by cell size)
			
			//make indv. area waves
			Redimension /N=(dimsize(IslandAreaW,0)+1) IslandAreaW
			Redimension /N=(dimsize(VoronoiAreaW,0)+1) VoronoiAreaW
			//Redimension /N=(dimsize(NrmAreaW,0)+1) NrmAreaW
			
			IslandAreaW[dimsize(IslandAreaW,0)-1]=AreaTableW[ObjNo][2]
			VoronoiAreaW[dimsize(VoronoiAreaW,0)-1]=AreaTableW[ObjNo][3]
			//NrmAreaW[dimsize(NrmAreaW,0)-1]=AreaTableW[ObjNo][4]
		EndIf
	EndFor
	
	Wavestats /Q IslandAreaW
	Duplicate /O IslandAreaW,$NrmAreaW_Name /WAVE=NrmAreaW
	NrmAreaW/=V_avg
	
	Display IslandAreaW vs VoronoiAreaW
	Modifygraph mode=3,mirror=1,minor=1,tick=2
	Legend
	
	
	//Histogram
	Make /O/N=(NBin) $NrmAreaHW_Name /WAVE=NrmAreaHW
	WaveStats /Q NrmAreaW
	Setscale /I x,V_min,V_max,NrmAreaHW
	Histogram /B={V_min,(V_max-V_min)/NBin,NBin} NrmAreaW,NrmAreaHW
	Display NrmAreaHW
	Modifygraph mode=5,mirror=1,minor=1,tick=2,hbFill=4
	//Fit
	Make /O/D/N=2/O $BetaFuncCoefW_Name /WAVE=BetaFuncCoefW
	BetaFuncCoefW[0] = {3,19}
	FuncFit/NTHR=0/TBOX=768 WKW_ISD BetaFuncCoefW  NrmAreaHW /D 
	
End

Function WKW_ISD(w,x) : FitFunc
	Wave w
	Variable x

	//CurveFitDialog/ These comments were created by the Curve Fitting dialog. Altering them will
	//CurveFitDialog/ make the function less convenient to work with in the Curve Fitting dialog.
	//CurveFitDialog/ Equation:
	//CurveFitDialog/ f(x) = A*(Beta^Beta)/gamma(Beta)*x^(Beta-1)*exp(-1*Beta*x)
	//CurveFitDialog/ End of Equation
	//CurveFitDialog/ Independent Variables 1
	//CurveFitDialog/ x
	//CurveFitDialog/ Coefficients 2
	//CurveFitDialog/ w[0] = Beta
	//CurveFitDialog/ w[1] = A

	return w[1]*(w[0]^w[0])/gamma(w[0])*x^(w[0]-1)*exp(-1*w[0]*x)
End

Function SetVarProc_DLA_FindIslands(sva) : SetVariableControl
	STRUCT WMSetVariableAction &sva

	switch( sva.eventCode )
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			Variable dval = sva.dval
			String sval = sva.sval
			ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
			variable SelRow=V_Value
			Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
			String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
			
			NVAR xAdj=root:Package_SLP:DLA:xAdj
			NVAR yAdj=root:Package_SLP:DLA:yAdj
			NVAR intAdj=root:Package_SLP:DLA:intAdj
			NVAR ImgTh=root:Package_SLP:DLA:ImgTh
			NVAR MinSize=root:Package_SLP:DLA:MinSize
			
			SLP_DLA_ImgListW[SelRow][4]=num2str(xAdj)
			SLP_DLA_ImgListW[SelRow][5]=num2str(yAdj)
			SLP_DLA_ImgListW[SelRow][6]=num2str(intAdj)
			SLP_DLA_ImgListW[SelRow][7]=num2str(ImgTh)
			SLP_DLA_ImgListW[SelRow][8]=num2str(MinSize)
			
			SLP_DLA_FindIslands(ImgW_FName,xAdj,yAdj,intAdj,ImgTh,MinSize)
			
			break
		case -1: // control being killed
			break
	endswitch

	return 0
End

Function SLP_DLA_FindIslands(ImgW_FName,xAdj,yAdj,intAdj,ImgTh,MinSize)
	String ImgW_FName
	
	variable xAdj
	variable yAdj
	variable intAdj
	variable ImgTh
	variable MinSize
	
	String ImgIntCorrW_FName=ImgW_FName+"_IntCorr"
	String IntNrmImgW_FName=ImgW_FName+"_IntNrm"
	String ThImgW_FName=ImgW_FName+"_Th"
	String ESpotXW_FName=ImgW_FName+"_ESpotX"
	String ESpotYW_FName=ImgW_FName+"_ESpotY"
	String VEdgesM_FName=ImgW_FName+"_VEdges"
	String VEdgesXW_FName=ImgW_FName+"_VEdgesX"
	String VEdgesYW_FName=ImgW_FName+"_VEdgesY"
	String IslandAreaW_FName=ImgW_FName+"_IsArea"
	
	Wave ImgW=$ImgW_FName
	
	Duplicate /O $ImgW_FName,$ImgIntCorrW_FName /WAVE=ImgIntCorrW
	
	ImgIntCorrW=intAdj*((x-xAdj)^2+(y-yAdj)^2)
	
	Duplicate /O $ImgW_FName,$IntNrmImgW_FName /WAVE=IntNrmImgW
	IntNrmImgW=ImgW-ImgIntCorrW
	
	ImageThreshold/Q/I/T=(ImgTh) $IntNrmImgW_FName
	Wave M_ImageThresh
	Duplicate /O M_ImageThresh,$ThImgW_FName
	
	ImageAnalyzeParticles /E/W/Q/M=3/A=(MinSize) stats, $ThImgW_FName
	
	wave W_ImageObjArea
	duplicate /O W_ImageObjArea,$IslandAreaW_FName 
	
	If (V_NumParticles>10)
		
		Wave M_Moments
		
		duplicate /O/R=[][0] M_Moments,$ESpotXW_FName /WAVE=ESpotXW
		duplicate /O/R=[][1] M_Moments,$ESpotYW_FName /WAVE=ESpotYW
		Redimension /N=-1 ESpotXW
		Redimension /N=-1 ESpotYW
		
		//NewImage /N=VoronoiMesh IntNrmImgW
		//Appendtograph /W=VoronoiMesh /T=top ESpotYW vs ESpotXW
		//Modifygraph /W=VoronoiMesh mode=3,marker=19,msize=3
		
		Make /O/N=(dimsize(ESpotXW,0),3) M_ESpotXY
		M_ESpotXY[][0]=ESpotXW[p]
		M_ESpotXY[][1]=ESpotYW[p]
		M_ESpotXY[][2]=0
		
		ImageTransForm Voronoi M_ESpotXY
		
		Wave M_VoronoiEdges
		Duplicate /O M_VoronoiEdges,$VEdgesM_FName /WAVe=VEdgesM
		Duplicate /O/R=[][0] M_VoronoiEdges,$VEdgesXW_FName /WAVe=VEdgeXW
		Duplicate /O/R=[][1] M_VoronoiEdges,$VEdgesYW_FName /WAVe=VEdgeYW
		
		//Appendtograph  /T=top M_VoronoiEdges[][1] vs M_VoronoiEdges[][0]
		
		variable xMin=dimoffset(ImgW,0)
		variable xMax=dimoffset(ImgW,0)+dimdelta(ImgW,0)*(dimsize(ImgW,0)-1)
		variable yMin=dimoffset(ImgW,1)
		variable yMax=dimoffset(ImgW,1)+dimdelta(ImgW,1)*(dimsize(ImgW,1)-1)
		
		SetAxis /W=SLP_DLA_Panel_01#DLA_IMAGE2 bottom,xMin,xMax
		SetAxis /R/W=SLP_DLA_Panel_01#DLA_IMAGE2 left,yMin,yMax
		
		
		
		SLP_DLA_DisplaySelectedImg()
		
	EndIf
End

Function SLP_DLA_FindIslands_StandAlone(ImgWName,xAdj,yAdj,intAdj,ImgTh,MinSize)
	String ImgWName
	
	variable xAdj
	variable yAdj
	variable intAdj
	variable ImgTh
	variable MinSize
	
	String ImgIntCorrW_Name=ImgWName+"_IntCorr"
	String IntNrmImgW_Name=ImgWName+"_IntNrm"
	String ThImgW_Name=ImgWName+"_Th"
	String ESpotXW_Name=ImgWName+"_ESpotX"
	String ESpotYW_Name=ImgWName+"_ESpotY"
	String VorEdgesW_Name=ImgWName+"_VorEdges"
	
	Wave ImgW=$ImgWName
	
	Duplicate /O $ImgWName,$ImgIntCorrW_Name /WAVE=ImgIntCorrW
	
	ImgIntCorrW=intAdj*((x-xAdj)^2+(y-yAdj)^2)
	
	Duplicate /O $ImgWName,$IntNrmImgW_Name /WAVE=IntNrmImgW
	IntNrmImgW=ImgW-ImgIntCorrW
	
	ImageThreshold/Q/I/T=(ImgTh) $IntNrmImgW_Name
	Wave M_ImageThresh
	Duplicate /O M_ImageThresh,Pn05_21_Th
	
	ImageAnalyzeParticles /E/W/Q/M=3/A=(MinSize) stats, $ThImgW_Name
	Wave M_Moments
	duplicate /O/R=[][0] M_Moments,$ESpotXW_Name /WAVE=ESpotXW
	duplicate /O/R=[][1] M_Moments,$ESpotYW_Name /WAVE=ESpotYW
	Redimension /N=-1 ESpotXW
	Redimension /N=-1 ESpotYW
	
	NewImage /N=VoronoiMesh IntNrmImgW
	Appendtograph /W=VoronoiMesh /T=top ESpotYW vs ESpotXW
	Modifygraph /W=VoronoiMesh mode=3,marker=19,msize=3
	
	Make /O/N=(dimsize(ESpotXW,0),3) M_ESpotXY
	M_ESpotXY[][0]=ESpotXW[p]
	M_ESpotXY[][1]=ESpotYW[p]
	M_ESpotXY[][2]=0
	
	ImageTransForm Voronoi M_ESpotXY
	
	Wave M_VoronoiEdges
	Duplicate /O M_VoronoiEdges,$VorEdgesW_Name /WAVe=VorEdgesW
	
	Appendtograph  /T=top M_VoronoiEdges[][1] vs M_VoronoiEdges[][0]
	
	variable xMin=dimoffset(ImgW,0)
	variable xMax=dimoffset(ImgW,0)+dimdelta(ImgW,0)*(dimsize(ImgW,0)-1)
	variable yMin=dimoffset(ImgW,1)
	variable yMax=dimoffset(ImgW,1)+dimdelta(ImgW,1)*(dimsize(ImgW,1)-1)
	
	SetAxis top ,xMin,xMax
	SetAxis/R left yMin,yMax
	
	SLP_DLA_VoronoiTraceAll(xMin,xMax,yMin,yMax)

End

Function SLP_DLA_VoronoiTraceAll(xMin,xMax,yMin,yMax)
	variable xMin,xMax,yMin,yMax
	
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"

	SLP_DLA_VoronoiProc1()
	Wave VEdgesProcM=$VEdgesProcM_FName
	
	Setdrawlayer /W=SLP_DLA_Panel_01#DLA_IMAGE2 ProgFront
	DrawAction /W=SLP_DLA_Panel_01#DLA_IMAGE2 delete
		
	Variable N_CellEdges=dimsize(VEdgesProcM,0)
	
	Variable i
	
	For (i=0;i<N_CellEdges;i+=1)
		SLP_DLA_VoronoiTraceSingle(i,xMin,xMax,yMin,yMax)
	EndFor
End

Function SLP_DLA_VoronoiProc1()
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	String ImgIntCorrW_FName=ImgW_FName+"_IntCorr"
	String IntNrmImgW_FName=ImgW_FName+"_IntNrm"
	String ThImgW_FName=ImgW_FName+"_Th"
	String ESpotXW_FName=ImgW_FName+"_ESpotX"
	String ESpotYW_FName=ImgW_FName+"_ESpotY"
	String VEdgesM_FName=ImgW_FName+"_VEdges"
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
	String VAreaResM_FName=ImgW_FName+"_VAreaRes"
	String VEdgesXW_FName=ImgW_FName+"_VEdgesX"
	String VEdgesYW_FName=ImgW_FName+"_VEdgesY"
	
	Wave VEdgesM=$VEdgesM_FName
	
	variable i=0
	
	Make /O /N=(dimsize(VEdgesM,0)/3, 64) $VEdgesProcM_FName /WAVE=VEdgesProcM
	Make /O /N=(dimsize(VEdgesProcM,0),8) $VAreaResM_FName /WAVE=VAreaResM
	VEdgesProcM=NaN
	VAreaResM=NaN
	
	For (i=0;i<dimsize(VEdgesM,0);i+=3)
		VEdgesProcM[i/3][0]=VEdgesM[i+0][0]
		VEdgesProcM[i/3][1]=VEdgesM[i+0][1]
		VEdgesProcM[i/3][2]=VEdgesM[i+1][0]
		VEdgesProcM[i/3][3]=VEdgesM[i+1][1]
	EndFor
End

Function SLP_DLA_VoronoiTrace()
	Wave M_VoronoiEdgesProc
	variable i=0
	variable j=0
	variable k=0
	
	Make /O /N=(4,1) V_OrgVector
	Make /O /N=(4,2) M_PathVectors
	
	variable x0,y0
	variable x1,y1
	
	For (i=0;i<dimsize( M_VoronoiEdgesProc,0);i+=1)
		V_OrgVector=M_VoronoiEdgesProc[i][q]
		x1=M_VoronoiEdgesProc[i][2]
		y1=M_VoronoiEdgesProc[i][3]
		For (j=0;j<dimsize( M_VoronoiEdgesProc,0);j+=1)
			If(j!=i)
				if (x1==M_VoronoiEdgesProc[j][0]&&y1==M_VoronoiEdgesProc[j][1])
					M_PathVectors[k][0]=x1
					M_PathVectors[k][1]=y1
					M_PathVectors[k][2]=M_VoronoiEdgesProc[j][2]
					M_PathVectors[k][3]=M_VoronoiEdgesProc[j][3]
					k+=1
				Elseif (x1==M_VoronoiEdgesProc[j][2]&&y1==M_VoronoiEdgesProc[j][3])
					M_PathVectors[k][0]=x1
					M_PathVectors[k][1]=y1
					M_PathVectors[k][2]=M_VoronoiEdgesProc[j][0]
					M_PathVectors[k][3]=M_VoronoiEdgesProc[j][1]
					k+=1
				Endif
			Endif
		EndFor
	EndFor
	
End

Function SLP_DLA_VoronoiTraceSingle(row,xMin,xMax,yMin,yMax)

	variable row
	variable xMin,xMax,yMin,yMax
	
	ControlInfo /W=SLP_DLA_Panel_01 ListBox_ImageList
	variable SelRow=V_Value
	
	Wave /T SLP_DLA_ImgListW=root:Package_SLP:DLA:SLP_DLA_ImgListW 
	String ImgW_FName=SLP_DLA_ImgListW[SelRow][1]+SLP_DLA_ImgListW[SelRow][0]
	String ImgIntCorrW_FName=ImgW_FName+"_IntCorr"
	String IntNrmImgW_FName=ImgW_FName+"_IntNrm"
	String ThImgW_FName=ImgW_FName+"_Th"
	String ESpotXW_FName=ImgW_FName+"_ESpotX"
	String ESpotYW_FName=ImgW_FName+"_ESpotY"
	String VEdgesM_FName=ImgW_FName+"_VEdges"
	String VEdgesProcM_FName=ImgW_FName+"_VEdgesP"
	String VAreaResM_FName=ImgW_FName+"_VAreaRes"
	String VEdgesXW_FName=ImgW_FName+"_VEdgesX"
	String VEdgesYW_FName=ImgW_FName+"_VEdgesY"

	Wave VEdgesProcM=$VEdgesProcM_FName
	Wave VAreaResM=$VAreaResM_FName
	
	//variable i=0
	variable j=0
	variable k=0
	variable m=2
	
	//Make /O /N=(1,4) V_OrgVector
	Make /O /N=(16,4) M_PathVectors
	Make /O /N=(dimsize(VEdgesProcM,0)) W_PassFlg
	
	W_PassFlg=0
	
	W_PassFlg[row]=1
	
	variable x0,y0
	variable x1,y1
	
	Setdrawlayer /W=SLP_DLA_Panel_01#DLA_IMAGE2 UserFront	
	DrawAction /W=SLP_DLA_Panel_01#DLA_IMAGE2 delete
	SetDrawEnv /W=SLP_DLA_Panel_01#DLA_IMAGE2  xcoord=bottom, ycoord=left,lineThick=3,lineFgc=(0,65535,0)
	Drawline /W=SLP_DLA_Panel_01#DLA_IMAGE2 VEdgesProcM[row][m-2],VEdgesProcM[row][m-1],VEdgesProcM[row][m-0],VEdgesProcM[row][m+1]
	
	Do
		//V_OrgVector=M_VoronoiEdgesProc[row][q]
		x0=VEdgesProcM[row][m-2]
		y0=VEdgesProcM[row][m-1]
		x1=VEdgesProcM[row][m-0]
		y1=VEdgesProcM[row][m+1]
		
		If (x0<xMin||x0>xMax||y0<yMin||y0>yMax||x1<xMin||x1>xMax||y1<xMin||y1>xMax)
			//W_VoronoiAreaResults[row][]=NaN
			Return 0
		Endif
		
		//Search for points that match (x1,y1)
		For (j=0;j<dimsize(VEdgesProcM,0);j+=1)
			If(W_PassFlg[j]!=1) //skip itself
				if (x1==VEdgesProcM[j][0]&&y1==VEdgesProcM[j][1])
					M_PathVectors[k][0]=x1
					M_PathVectors[k][1]=y1
					M_PathVectors[k][2]=VEdgesProcM[j][2]
					M_PathVectors[k][3]=VEdgesProcM[j][3]
					k+=1
					W_PassFlg[j]=1
				Elseif (x1==VEdgesProcM[j][2]&&y1==VEdgesProcM[j][3])
					M_PathVectors[k][0]=x1
					M_PathVectors[k][1]=y1
					M_PathVectors[k][2]=VEdgesProcM[j][0]
					M_PathVectors[k][3]=VEdgesProcM[j][1]
					k+=1
					W_PassFlg[j]=1
				Endif
			Endif
		EndFor
		
		variable VSelection=SLP_DLA_CWPathSelect(x0,y0,x1,y1,M_PathVectors[0][2],M_PathVectors[0][3],M_PathVectors[1][2],M_PathVectors[1][3])
		
		If (VSelection==1)
			VEdgesProcM[row][m+2]=M_PathVectors[0][2]
			VEdgesProcM[row][m+3]=M_PathVectors[0][3]
		ElseIf (VSelection==2)
			VEdgesProcM[row][m+2]=M_PathVectors[1][2]
			VEdgesProcM[row][m+3]=M_PathVectors[1][3]
		Endif
		
		Setdrawlayer /W=SLP_DLA_Panel_01#DLA_IMAGE2 UserFront	
		//DrawAction /W=SLP_DLA_Panel_01#DLA_IMAGE2 delete
		SetDrawEnv /W=SLP_DLA_Panel_01#DLA_IMAGE2  xcoord=bottom, ycoord=left,lineThick=3,lineFgc=(0,0,65535)
		Drawline /W=SLP_DLA_Panel_01#DLA_IMAGE2 x1,y1,VEdgesProcM[row][m+2],VEdgesProcM[row][m+3]
		
		DoUpdate
		
		M_PathVectors=0
		k=0
		m+=2
	
	While (!(VEdgesProcM[row][0]==VEdgesProcM[row][m]&&(VEdgesProcM[row][1]==VEdgesProcM[row][m+1]))&&m<100)
	
	variable N_Sides=m/2
	VAreaResM[row][0]=N_Sides
	make /O/N=(N_Sides+1) CellEdgeX
	make /O/N=(N_Sides+1) CellEdgeY
	CellEdgeX=VEdgesProcM[row][2*p]
	CellEdgeY=VEdgesProcM[row][2*p+1]
	VAreaResM[row][1]=AreaXY(CellEdgeX,CellEdgeY)
	String AreaXYText=num2str(AreaXY(CellEdgeX,CellEdgeY))
	
	variable xCenter=mean(CellEdgeX,0,dimsize(CellEdgeX,0)-1)
	variable yCenter=mean(CellEdgeY,0,dimsize(CellEdgeY,0)-1)
	
	Setdrawlayer /W=SLP_DLA_Panel_01#DLA_IMAGE2  ProgFront	
	SetDrawEnv /W=SLP_DLA_Panel_01#DLA_IMAGE2   xcoord=bottom, ycoord=left,fSize=10,TextRGB=(0,0,0)
	DrawText /W=SLP_DLA_Panel_01#DLA_IMAGE2  xCenter,yCenter,AreaXYText
	DoUpdate
End

Function SLP_DLA_CWPathSelect(x0,y0,x1,y1,x2,y2,x3,y3)
	variable x0,y0,x1,y1,x2,y2,x3,y3
	
	variable a0=x1-x0
	variable b0=y1-y0
	variable a1=x2-x1
	variable b1=y2-y1
	variable a2=x3-x1
	variable b2=y3-y1
	
	variable crossP01=a0*b1-a1*b0
	variable crossP02=a0*b2-a2*b0
	
	variable Vselection=0
	
	If (crossP01>=crossP02)
		Vselection=1
	Else
		Vselection=2
	Endif
	
	Return VSelection
End

Function SLP_LEEDIV_MkLEEDVol(VolW_FName,StrElemSize,Th_Factor,ScrnMskW_FName)
	String VolW_FName
	Variable StrElemSize,Th_Factor
	String ScrnMskW_FName // 0 = ROI, not 0 = outside ROI
	
	Wave VolW=$VolW_FName
	String LEEDVolW_FName=VolW_FName+"_LEEDVol"
	String ImgW_FName=VolW_FName+"_Img"
	String Img_nBgW_FName=VolW_FName+"_Img_nBg"
	String Img_ThW_FName=VolW_FName+"_Img_Th"
	
	//Duplicate /O $VolW_FName,$LEEDVolW_FName /WAVE=LEEDVolW
	//LEEDVolW=NaN
	If (Exists("LEEDSpotScatter"))
		Wave LEEDSpotScatter
		redimension /N=(0,-1) LEEDSpotScatter
	Endif
	
	variable X_size=dimsize(VolW,0)
	variable Y_size=dimsize(VolW,1)
	variable En_size=dimsize(VolW,2)
	
	variable i=0
	variable Particle_Threshold=0
	variable MinSpotSize=5
	Variable N_Spots=0
	Make /O/N=1 W_SpotX
	Make /O/N=1 W_SpotY
	Make /O/N=1 x_pos
	Make /O/N=1 y_pos
	Make /O/N=1 W_BoundaryX
	Make /O/N=1 W_BoundaryY
	
	SLP_LEEDIV_ExtLayer(VolW_FName,i)
	Wave ImgW=$ImgW_FName
	Duplicate /O ImgW,$Img_nBgW_FName /Wave=Img_nBgW
	Duplicate /O ImgW,$Img_ThW_FName /Wave=Img_ThW
	
	Newimage /N=MkLEEDVol1 ImgW
	
	//NewImage /N=MkLEEDVol2 Img_nBgW
	//String ImageName=stringfromlist(0,ImageNameList("",";"))
	//ModifyImage $ImageName ctab= {*,*,BlueHot,1}
	
	//NewImage /N=MkLEEDVol3 Img_ThW
	
	appendtograph /T=top y_pos vs x_pos
	Modifygraph mode(y_pos)=3
	appendtograph /T=top W_BoundaryY vs W_BoundaryX
	ModifyGraph mode(W_BoundaryY)=0,rgb(W_BoundaryY)=(16385,49025,65535)

	
	
	Wave Mask=$ScrnMskW_FName
	String BGMask_FName=ScrnMskW_FName+"_Bg"
	duplicate /O Mask,$BGMask_FName /WAVE=BGMask
	Redimension /S BGMask
	MatrixOp /O BGMask=replace(BGMask,1,NaN)
	MatrixOp /O BGMask=replace(BGMask,0,1)
	
	For (i=0;i<En_size;i+=1)
		
		//Extract layer
		SLP_LEEDIV_ExtLayer(VolW_FName,i)
		
		SLP_LEEDIV_RmBg(ImgW_FName,StrElemSize,1)
		
		wave Img_nBgW=$Img_nBgW_FName
		Img_nBgW*=Mask
		Imagestats /Q Img_nBgW
		Particle_Threshold=V_avg+V_sdev^0.5*Th_Factor
		
		//Image Threshold
		ImageThreshold /I/T=(Particle_Threshold)/Q ImgW
		Wave M_ImageThresh
		Duplicate /O M_ImageThresh, $Img_ThW_FName /Wave=Img_ThW
		ImageAnalyzeParticles /E/W/Q/M=3/A=(MinSpotSize)/R=Mask stats, Img_ThW
		
		//Assign to LEED volume
		Wave M_Moments
		duplicate /O /R=[][0] M_Moments,x_pos
		Redimension /N=-1 x_pos
		duplicate /O /R=[][1] M_Moments,y_pos
		Redimension /N=-1 y_pos
		//wave y_pos=W_SpotY
		N_Spots=dimsize(x_pos,0)
		
		//current_energy=energy_start+(i*energy_step)
		//print num2str(current_energy)+"eV"
		
		if (N_Spots>0) //Only when spots are found - skip adding data if no LEED spot
		
			make /O /N=(N_Spots) z_pos=i
			
			concatenate/O {x_pos,y_pos,z_pos},LEEDxyzBlock 
			//x,y, and z columns are put together side by side as a 'block'
			concatenate/NP=0 {LEEDxyzBlock},LEEDSpotScatter
			//The data block is now place after the last row. Note the use of /NP=0 (add to end of row)
		
		endif
		
		print "Image "+num2str(i)+"/"+num2str(En_size)+" Threshold value = "+num2str(Particle_Threshold)
		
		DoUpdate
		
	EndFor
	
	SLP_Util_PlayAlert()

End


Function SLP_LEEDIV_ExtLayer(VolW_FName,Layer_num)
	String VolW_FName
	Variable Layer_num
	
	Wave VolW=$VolW_FName
	
	String ImgW_FName=VolW_FName+"_Img"
	
	Make /O /N=(dimsize(VolW,0),dimsize(VolW,1))  $ImgW_FName /WAVE=ImgW
	
	ImgW=VolW[p][q][Layer_num]
	
End

Function SLP_LEEDIV_RmBg(ImgW_FName,StrElemSize,NPass)
	String ImgW_FName //Name of 2D wave (1 image)
	Variable StrElemSize //size of Structure element in pixel
	Variable NPass //number of iterations for image morphology
	
	Wave ImgW=$ImgW_FName
	
	//Create Structure Element
	make /O/N=(StrElemSize,StrElemSize) StrElemW
	StrElemW=1
	Redimension /B/U StrElemW
	
	//Create 'Unsigned-byte' image wave (from Command Help of ImageMorphology)
	
	WaveStats /Q ImgW
	Variable nor=255/(V_max-V_min)
	MatrixOp /O ImgW_UByte=(ImgW-V_min)*nor
	Redimension /B/U ImgW_UByte
	
	ImageMorphology/O/S=StrElemW/I=(NPass) Opening, ImgW_UByte
	
	//ImageMorphology/O/S=StrElemW/I=(NPass) Dilation, ImgW_UByte
	
	//Wave M_ImageMorph
	
	Duplicate /O ImgW_UByte,ImgBgW
	
	ImgBgW=ImgBgW*(V_max-V_min)/255+V_min
	
	String Img_nBgW_FName=ImgW_FName+"_nBg"
	Duplicate /O ImgW,$Img_nBgW_FName /Wave=Img_nBgW
	
	Img_nBgW-=ImgBgW
	
	//NewImage Img_nBgW
	
	Killwaves StrElemW
	
End

Function SLP_Util_PlayAlert()
	Make/B/O/N=1000 sineSound			// 8 bit samples
	SetScale/P x,0,1e-4,sineSound		// Set sample rate to 10Khz
	sineSound= 50*sin(2*Pi*1000*x)	// Create 1Khz sinewave tone
	PlaySound sineSound
	sineSound= 50*sin(2*Pi*2000*x)	// Create 1Khz sinewave tone
	PlaySound sineSound
	sineSound= 50*sin(2*Pi*250*x)	// Create 1Khz sinewave tone
	PlaySound sineSound
End
